<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 3/12/2009 at 1:20:02 at p.m. using:

COR (0.9.31.1333)
Copyright 2002-2009 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="lockwood_2006" cmeta:id="lockwood_2006" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Application of clinical trial simulation to compare proof-of-concept study designs for drugs with a slow onset of effect; an example in Alzheimer's disease</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
       This CellML model runs in both PCEnv and COR to replicate the published results (as confirmed by the original model author).  The units have been checked and they are consistent.
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: OBJECTIVE: Clinical trial simulation (CTS) was used to select a robust design to test the hypothesis that a new treatment was effective for Alzheimer's disease (AD). Typically, a parallel group, placebo controlled, 12-week trial in 200-400 AD patients would be used to establish drug effect relative to placebo (i.e., Ho: Drug Effect = 0). We evaluated if a crossover design would allow smaller and shorter duration trials. MATERIALS AND METHODS: A family of plausible drug and disease models describing the time course of the AD assessment scale (ADAS-Cog) was developed based on Phase I data and litreature reports of other treatments for AD. The models included pharmacokinetic, pharmacodynamic, disease progression, and placebo components. Eight alternative trial designs were explored via simulation. One hundred replicates of each combination of drug and disease model and trial design were simulated. A 'positive trial' reflecting drug activity was declared considering both a dose trend test (p less than 0.05) and pair-wise comparisons to placebo (p less than 0.025). RESULTS: A 4 x 4 Latin Square design was predicted to have at least 80% power to detect activity across a range of drug and disease models. The trial design was subsequently implemented and the trial was completed. Based on the results of the actual trial, a conclusive decision about further development was taken. The crossover design provided enhanced power over a parallel group design due to the lower residual variability. CONCLUSION: CTS aided the decision to use a more efficient proof of concept trial design, leading to savings of up to US 4 M dollars in direct costs and a firm decision 8-12 months earlier than a 12-week parallel group trial.
</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
Application of clinical trial simulation to compare proof-of-concept study designs for drugs with a slow onset of effect; an example in Alzheimer's disease, Peter Lockwood, Wayne Ewy, David Hermann and Nick Holford, 2006, <emphasis>Pharmaceutical Research</emphasis>, 23, (9), 2050-2059.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&amp;cmd=Retrieve&amp;dopt=AbstractPlus&amp;list_uids=16906456&amp;query_hl=1&amp;itool=pubmed_docsum">PubMed ID: 16906456</ulink>
				</para>
			</sect1>
		</article>
	</documentation>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
		<foo xmlns="http://www.example.org/foo/bar/baz"/>
		<rdf:Description rdf:about="">
			<dc:creator rdf:parseType="Resource">
				<vCard:N rdf:parseType="Resource">
					<vCard:Family>Lawson</vCard:Family>
					<vCard:Given>James</vCard:Given>
				</vCard:N>
				<vCard:EMAIL rdf:parseType="Resource">
					<rdf:value>j.lawson@auckland@auckland.ac.nz</rdf:value>
					<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
				</vCard:EMAIL>
				<vCard:ORG rdf:parseType="Resource">
					<vCard:Orgname>The University of Auckland</vCard:Orgname>
					<vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
				</vCard:ORG>
			</dc:creator>
			<dcterms:created rdf:parseType="Resource">
				<dcterms:W3CDTF>2009-12-07</dcterms:W3CDTF>
			</dcterms:created>
		</rdf:Description>
		<rdf:Description rdf:about="#lockwood_2006">
			<bqs:reference rdf:parseType="Resource">
				<dc:subject rdf:parseType="Resource">
					<bqs:subject_type>keyword</bqs:subject_type>
					<rdf:value>
						<rdf:Bag>
							<rdf:li>PKPD</rdf:li>
							<rdf:li>pharmacokinetic pharmacodynamic model</rdf:li>
						</rdf:Bag>
					</rdf:value>
				</dc:subject>
			</bqs:reference>
			<bqs:reference rdf:parseType="Resource">
				<bqs:Pubmed_id>16906456</bqs:Pubmed_id>
				<bqs:JournalArticle rdf:parseType="Resource">
					<dc:creator>
						<rdf:Seq>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N rdf:parseType="Resource">
										<vCard:Family>Lockwood</vCard:Family>
										<vCard:Given>P</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N rdf:parseType="Resource">
										<vCard:Family>Ewy</vCard:Family>
										<vCard:Given>W</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N rdf:parseType="Resource">
										<vCard:Family>Hermann</vCard:Family>
										<vCard:Given>D</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N rdf:parseType="Resource">
										<vCard:Family>Holford</vCard:Family>
										<vCard:Given>N</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
						</rdf:Seq>
					</dc:creator>
					<dc:title>
            Application of clinical trial simulation to compare proof-of-concept study designs for drugs with a slow onset of effect; an example in Alzheimer's disease
          </dc:title>
					<dcterms:issued rdf:parseType="Resource">
						<dcterms:W3CDTF>2006-09</dcterms:W3CDTF>
					</dcterms:issued>
					<bqs:Journal rdf:parseType="Resource">
						<dc:title>Pharmaceutical Research</dc:title>
					</bqs:Journal>
					<bqs:volume>23</bqs:volume>
					<bqs:first_page>2050</bqs:first_page>
					<bqs:last_page>2059</bqs:last_page>
				</bqs:JournalArticle>
			</bqs:reference>
		</rdf:Description>
	</rdf:RDF>   
   
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="units" base_units="yes"/>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="mg">
      <unit units="gram" prefix="milli"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="units_ml_per_ng">
      <unit units="units"/>
      <unit units="litre" prefix="milli"/>
      <unit units="gram" prefix="nano" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="ng_per_ml">
      <unit units="gram" prefix="nano"/>
      <unit units="litre" prefix="milli" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="mg_per_litre">
      <unit units="gram" prefix="milli"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="litre_per_day">
      <unit units="litre"/>
      <unit units="day" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="day">
      <unit units="second" multiplier="86400"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="per_day">
      <unit units="day" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="units_per_day">
      <unit units="units"/>
      <unit units="day" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="year">
      <unit units="second" multiplier="31536000"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="per_year">
      <unit units="year" exponent="-1"/>
   </units>
   
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="environment">
      <variable name="time" units="day" public_interface="out"/>
   </component>
   
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="population_pharmacodynamics_model" cmeta:id="#population_pharmacodynamics_model">
        <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
     		<rdf:Description rdf:about="#drop_out_model">
     			<rdf:value>
     			Note that the epsilon in this component is a random variable with a mean of 0 and a standard deviation sigma= 4 ADASC units. However in the CellML we have to represent this as a constant value - at least for now - because as yet there is no way of representing a random variable. Possible solutions to this problem are currently being discussed and will probably involve SED-ML. 
     			</rdf:value>
     		</rdf:Description>
     	</rdf:RDF>
      <variable name="S" units="units"/>
      <variable name="S0" units="units" initial_value="30"/>
      <variable name="alpha" units="units_per_day" initial_value="0.0164"/>
      <variable name="epsilon" units="units" initial_value="0.0"/>
      <variable name="time" units="day" public_interface="in"/>
      <variable name="ADAS_Cog_p" units="units" public_interface="in"/>
      <variable name="PD_CeA" units="units" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>S</ci>
            <apply>
               <plus/>
               <ci>S0</ci>
               <apply>
                  <times/>
                  <ci>alpha</ci>
                  <ci>time</ci>
               </apply>
               <ci>ADAS_Cog_p</ci>
               <ci>PD_CeA</ci>
               <ci>epsilon</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="placebo_response_model">
      <variable name="ADAS_Cog_p" units="units" public_interface="out"/>
      <variable name="beta_P" units="units" initial_value="-3"/>
      <variable name="Keq_p" units="per_day"/>
      <variable name="Kel_p" units="per_day"/>
      <variable name="t_half_el_p" units="day" initial_value="7"/>
      <variable name="t_half_eq_p" units="day" initial_value="6"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>ADAS_Cog_p</ci>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>beta_P</ci>
                     <ci>Keq_p</ci>
                  </apply>
                  <apply>
                     <minus/>
                     <ci>Keq_p</ci>
                     <ci>Kel_p</ci>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <ci>Kel_p</ci>
                        </apply>
                        <ci>time</ci>
                     </apply>
                  </apply>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <ci>Keq_p</ci>
                        </apply>
                        <ci>time</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>Keq_p</ci>
            <apply>
               <divide/>
               <apply>
                  <ln/>
                  <cn cellml:units="dimensionless">2</cn>
               </apply>
               <ci>t_half_eq_p</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>Kel_p</ci>
            <apply>
               <divide/>
               <apply>
                  <ln/>
                  <cn cellml:units="dimensionless">2</cn>
               </apply>
               <ci>t_half_el_p</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="pharmacokinetic_model">
      <variable name="CL" units="litre_per_day" public_interface="out"/>
      <variable name="smk" units="dimensionless" initial_value="1"/>
      <variable name="age" units="year" initial_value="40"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>CL</ci>
            <apply>
               <times/>
               <cn cellml:units="litre_per_day">2268.0</cn>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <cn cellml:units="per_year">0.0135</cn>
                     </apply>
                     <apply>
                        <minus/>
                        <ci>age</ci>
                        <cn cellml:units="year">40</cn>
                     </apply>
                  </apply>
               </apply>
               <ci>smk</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="drop_out_model" cmeta:id="#drop_out_model">
        <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
     		<rdf:Description rdf:about="#drop_out_model">
     			<rdf:value>
     			This component has been included to match the published paper.  However in the CellML model it is a bit redundant because population statistics are not considered - at least not yet.
     			</rdf:value>
     		</rdf:Description>
     	</rdf:RDF>

      <variable name="Sv" units="dimensionless"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>Sv</ci>
            <apply>
               <exp/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <cn cellml:units="per_day">0.00145</cn>
                  </apply>
                  <ci>time</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="drug_response_model">
      <variable name="PD_CeA" units="units" public_interface="out"/>
      <variable name="beta_a" units="units_ml_per_ng" initial_value="-0.047"/>
      <variable name="CeA" units="ng_per_ml" initial_value="25"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>PD_CeA</ci>
            <apply>
               <times/>
               <ci>beta_a</ci>
               <ci>CeA</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="drug_clearance">
      <variable name="CC" units="mg_per_litre" initial_value="0"/>
      <variable name="PC" units="mg_per_litre" initial_value="0"/>
      <variable name="Vc" units="litre" initial_value="172"/>
      <variable name="Vp" units="litre" initial_value="222"/>
      <variable name="A_in" units="mg" initial_value="25"/>
      <variable name="k_ab" units="per_day" initial_value="115.44"/>
      <variable name="CL_ic" units="litre_per_day" initial_value="763.2"/>
      <variable name="time" units="day" public_interface="in"/>
      <variable name="CL" units="litre_per_day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CC</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <times/>
                     <ci>k_ab</ci>
                     <ci>A_in</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <ci>CL</ci>
                        <ci>CC</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>CL_ic</ci>
                        <apply>
                           <minus/>
                           <ci>CC</ci>
                           <ci>PC</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <ci>Vc</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>PC</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>CL_ic</ci>
                  <apply>
                     <minus/>
                     <ci>CC</ci>
                     <ci>PC</ci>
                  </apply>
               </apply>
               <ci>Vp</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>A_in</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <minus/>
                  <cn cellml:units="per_day">115.44</cn>
               </apply>
               <ci>A_in</ci>
            </apply>
         </apply>
      </math>
   </component>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="placebo_response_model" component_2="population_pharmacodynamics_model"/>
      <map_variables variable_1="ADAS_Cog_p" variable_2="ADAS_Cog_p"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="drug_response_model" component_2="population_pharmacodynamics_model"/>
      <map_variables variable_1="PD_CeA" variable_2="PD_CeA"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="drug_clearance" component_2="pharmacokinetic_model"/>
      <map_variables variable_1="CL" variable_2="CL"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="drop_out_model" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="placebo_response_model" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="population_pharmacodynamics_model" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="drug_clearance" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
</model>
