<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :baylor_2002b.xml

CREATED :  23rd May 2007

LAST MODIFIED : 23rd May 2007

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.

DESCRIPTION :  This file contains a CellML description of Baylor, Hollingworth and Chandler's 2002 model of the Ca2+-ATP binding reaction in skeletal myocytes.

CHANGES:  
  

--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="baylor_2002b" name="baylor_2002b">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Comparison of simulated and measured calcium sparks in intact skeletal muscle fibers of the frog</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>

    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
     <section id="sec_status">
    <title>Model Status</title>
    <para>This CellML model runs in OpenCell and COR and the units are consistent. There are no simple figures of concentration against time in the publication to compare the CellML model simulation output against.
</para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: Calcium sparks in frog intact skeletal muscle fibers were modeled as stereotypical events that arise from a constant efflux of Ca(2+) from a point source for a fixed period of time (e.g., 2.5 pA of Ca(2+) current for 4.6 ms; 18 degrees C). The model calculates the local changes in the concentrations of free Ca(2+) and of Ca(2+) bound to the major intrinsic myoplasmic Ca(2+) buffers (troponin, ATP, parvalbumin, and the SR Ca(2+) pump) and to the Ca(2+) indicator (fluo-3). A distinctive feature of the model is the inclusion of a binding reaction between fluo-3 and myoplasmic proteins, a process that strongly affects fluo-3's Ca(2+)-reaction kinetics, its apparent diffusion constant, and hence the morphology of sparks. DeltaF/F (the change in fluo-3's fluorescence divided by its resting fluorescence) was estimated from the calculated changes in fluo-3 convolved with the microscope point-spread function. To facilitate comparisons with measured sparks, noise and other sources of variability were included in a random repetitive fashion to generate a large number of simulated sparks that could be analyzed in the same way as the measured sparks. In the initial simulations, the binding of Ca(2+) to the two regulatory sites on troponin was assumed to follow identical and independent binding reactions. These simulations failed to accurately predict the falling phase of the measured sparks. A second set of simulations, which incorporated the idea of positive cooperativity in the binding of Ca(2+) to troponin, produced reasonable agreement with the measurements. Under the assumption that the single channel Ca(2+) current of a ryanodine receptor (RYR) is 0.5-2 pA, the results suggest that 1-5 active RYRs generate an average Ca(2+) spark in a frog intact muscle fiber. 
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Comparison of simulated and measured calcium sparks in intact skeletal muscle fibers of the frog, S.M. Baylor, S. Hollingworth and W.K. Chandler, 2002, <emphasis>Journal of General Physiology</emphasis>, 120, 349-368. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/12198091">PubMed ID: 12198091</ulink> 
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <imagedata fileref="baylor_2002.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagrams of the Ca<superscript>2+</superscript> binding reactions for various buffers and indicators: <emphasis role="bold">A</emphasis>  The reaction of Ca<superscript>2+</superscript> with ATP in the presence of free Mg<superscript>2+</superscript>, <emphasis role="bold">B</emphasis>  Reaction of Ca<superscript>2+</superscript> with protein (Pr) and fluo-3 (Fluo), <emphasis role="bold">C</emphasis>  Competitive reaction of Ca<superscript>2+</superscript> and Mg<superscript>2+</superscript> with parvalbumin (Parv), <emphasis role="bold">D</emphasis>  Binding reaction of Ca<superscript>2+</superscript> binding and transport by the sarcoplasmic reticulum Ca<superscript>2+</superscript> pump (E), <emphasis role="bold">E</emphasis>  One-step reaction of Ca<superscript>2+</superscript> with Troponin (Trop), and <emphasis role="bold">F</emphasis>  Two-step reaction of Ca<superscript>2+</superscript> with Troponin (Trop).</caption>

</informalfigure>

</sect1>
</article>
</documentation>
    
  
   <units name="micromolar">
      <unit units="mole" prefix="micro"/>
      <unit units="litre" exponent="-1"/>
   </units>
   
   <units name="first_order_rate_constant">
      <unit units="second" exponent="-1"/>
   </units>
  
   <units name="second_order_rate_constant">
      <unit units="micromolar" exponent="-1"/>
      <unit units="second" exponent="-1"/>
   </units>
  
  
   <component name="environment">
      <variable units="second" public_interface="out" name="time"/>
   </component>
   
   
   <component cmeta:id="Ca" name="Ca">
      <variable units="micromolar" public_interface="out" name="Ca" initial_value="0.05"/>
      
      <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k1_"/>
      <variable units="second_order_rate_constant" public_interface="in" name="k2"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k2_"/>
      <variable units="micromolar" public_interface="in" name="Fluo"/>
      <variable units="micromolar" public_interface="in" name="CaFluo"/>
      <variable units="micromolar" public_interface="in" name="CaPrFluo"/>
      <variable units="micromolar" public_interface="in" name="PrFluo"/>
      <variable units="second" public_interface="in" name="time"/>
      
      <math xmlns="http://www.w3.org/1998/Math/MathML">
        <apply>
        <eq/>
          <apply>
          <diff/> 
            <bvar>
            <ci>time</ci>
          </bvar> 
            <ci> Ca </ci> 
          </apply>
          <apply>
          <minus/>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k1_ </ci>
                <ci> CaFluo </ci>
              </apply>
              <apply>
              <times/>
                <ci> k2_ </ci>
                <ci> CaPrFluo </ci>
              </apply>
            </apply>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k1 </ci>
                <ci> Ca </ci>
                <ci> Fluo </ci>
              </apply>
              <apply>
              <times/>
                <ci> k2 </ci>
                <ci> Ca </ci>
                <ci> PrFluo </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </math>
   </component>
   
   <component cmeta:id="Fluo" name="Fluo">
      <variable units="micromolar" public_interface="out" name="Fluo" initial_value="11.88"/>
      
      <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k1_"/>
      <variable units="second_order_rate_constant" public_interface="in" name="k3"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k3_"/>
      <variable units="micromolar" public_interface="in" name="Ca"/>
      <variable units="micromolar" public_interface="in" name="CaFluo"/>
      <variable units="micromolar" public_interface="in" name="Pr"/>
      <variable units="micromolar" public_interface="in" name="PrFluo"/>
      <variable units="second" public_interface="in" name="time"/>
      
      <math xmlns="http://www.w3.org/1998/Math/MathML">
        <apply>
        <eq/>
          <apply>
          <diff/> 
            <bvar>
            <ci>time</ci>
          </bvar> 
            <ci> Fluo </ci> 
          </apply>
          <apply>
          <minus/>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k3_ </ci>
                <ci> PrFluo </ci>
              </apply>
              <apply>
              <times/>
                <ci> k1_ </ci>
                <ci> CaFluo </ci>
              </apply>
            </apply>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k3 </ci>
                <ci> Pr </ci>
                <ci> Fluo </ci>
              </apply>
              <apply>
              <times/>
                <ci> k1 </ci>
                <ci> Ca </ci>
                <ci> Fluo </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </math>
   </component>
   
   <component cmeta:id="Pr" name="Pr">
      <variable units="micromolar" public_interface="out" name="Pr" initial_value="3000.0"/>
      
      <variable units="second_order_rate_constant" public_interface="in" name="k3"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k3_"/>
      <variable units="second_order_rate_constant" public_interface="in" name="k4"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k4_"/>
      <variable units="micromolar" public_interface="in" name="Fluo"/>
      <variable units="micromolar" public_interface="in" name="PrFluo"/>
      <variable units="micromolar" public_interface="in" name="CaFluo"/>
      <variable units="micromolar" public_interface="in" name="CaPrFluo"/>
      <variable units="second" public_interface="in" name="time"/>
      
      <math xmlns="http://www.w3.org/1998/Math/MathML">
        <apply>
        <eq/>
          <apply>
          <diff/> 
            <bvar>
            <ci>time</ci>
          </bvar> 
            <ci> Pr </ci> 
          </apply>
          <apply>
          <minus/>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k4_ </ci>
                <ci> CaPrFluo </ci>
              </apply>
              <apply>
              <times/>
                <ci> k3_ </ci>
                <ci> PrFluo </ci>
              </apply>
            </apply>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k4 </ci>
                <ci> Pr </ci>
                <ci> CaFluo </ci>
              </apply>
              <apply>
              <times/>
                <ci> k3 </ci>
                <ci> Pr </ci>
                <ci> Fluo </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </math>
   </component>
  
   <component cmeta:id="PrFluo" name="PrFluo">
      <variable units="micromolar" public_interface="out" name="PrFluo" initial_value="88.12"/>
      
      <variable units="second_order_rate_constant" public_interface="in" name="k3"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k3_"/>
      <variable units="second_order_rate_constant" public_interface="in" name="k2"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k2_"/>
      <variable units="micromolar" public_interface="in" name="Fluo"/>
      <variable units="micromolar" public_interface="in" name="Pr"/>
      <variable units="micromolar" public_interface="in" name="Ca"/>
      <variable units="micromolar" public_interface="in" name="CaPrFluo"/>
      <variable units="second" public_interface="in" name="time"/>
      
      <math xmlns="http://www.w3.org/1998/Math/MathML">
        <apply>
        <eq/>
          <apply>
          <diff/> 
            <bvar>
            <ci>time</ci>
          </bvar> 
            <ci> PrFluo </ci> 
          </apply>
          <apply>
          <minus/>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k3 </ci>
                <ci> Pr </ci>
                <ci> Fluo </ci>
              </apply>
              <apply>
              <times/>
                <ci> k2_ </ci>
                <ci> CaPrFluo </ci>
              </apply>
            </apply>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k3_ </ci>
                <ci> PrFluo </ci>
              </apply>
              <apply>
              <times/>
                <ci> k2 </ci>
                <ci> Ca </ci>
                <ci> PrFluo </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </math>
   </component>
  
   <component cmeta:id="CaFluo" name="CaFluo">
      <variable units="micromolar" public_interface="out" name="CaFluo" initial_value="0.01"/>
      
      <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k1_"/>
      <variable units="second_order_rate_constant" public_interface="in" name="k4"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k4_"/>
      <variable units="micromolar" public_interface="in" name="Fluo"/>
      <variable units="micromolar" public_interface="in" name="Pr"/>
      <variable units="micromolar" public_interface="in" name="Ca"/>
      <variable units="micromolar" public_interface="in" name="CaPrFluo"/>
      <variable units="second" public_interface="in" name="time"/>
      
      <math xmlns="http://www.w3.org/1998/Math/MathML">
        <apply>
        <eq/>
          <apply>
          <diff/> 
            <bvar>
            <ci>time</ci>
          </bvar> 
            <ci> CaFluo </ci> 
          </apply>
          <apply>
          <minus/>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k1 </ci>
                <ci> Ca </ci>
                <ci> Fluo </ci>
              </apply>
              <apply>
              <times/>
                <ci> k4_ </ci>
                <ci> CaPrFluo </ci>
              </apply>
            </apply>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k1_ </ci>
                <ci> CaFluo </ci>
              </apply>
              <apply>
              <times/>
                <ci> k4 </ci>
                <ci> Pr </ci>
                <ci> CaFluo </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </math>
   </component>
  
   <component cmeta:id="CaPrFluo" name="CaPrFluo">
      <variable units="micromolar" public_interface="out" name="CaPrFluo" initial_value="0.01"/>
      
      <variable units="second_order_rate_constant" public_interface="in" name="k2"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k2_"/>
      <variable units="second_order_rate_constant" public_interface="in" name="k4"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k4_"/>
      <variable units="micromolar" public_interface="in" name="Ca"/>
      <variable units="micromolar" public_interface="in" name="CaFluo"/>
      <variable units="micromolar" public_interface="in" name="Pr"/>
      <variable units="micromolar" public_interface="in" name="PrFluo"/>
      <variable units="second" public_interface="in" name="time"/>
      
      <math xmlns="http://www.w3.org/1998/Math/MathML">
        <apply>
        <eq/>
          <apply>
          <diff/> 
            <bvar>
            <ci>time</ci>
          </bvar> 
            <ci> CaPrFluo </ci> 
          </apply>
          <apply>
          <minus/>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k4 </ci>
                <ci> Pr </ci>
                <ci> CaFluo </ci>
              </apply>
              <apply>
              <times/>
                <ci> k2 </ci>
                <ci> Ca </ci>
                <ci> PrFluo </ci>
              </apply>
            </apply>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k4_ </ci>
                <ci> CaPrFluo </ci>
              </apply>
              <apply>
              <times/>
                <ci> k2_ </ci>
                <ci> CaPrFluo </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </math>
   </component>
   
   <component name="reaction_constants">
      <variable units="second_order_rate_constant" public_interface="out" name="k1" initial_value="2.676E14"/>
      <variable units="first_order_rate_constant" public_interface="out" name="k1_" initial_value="137.0"/>
      <variable units="second_order_rate_constant" public_interface="out" name="k2" initial_value="1.72E13"/>
      <variable units="first_order_rate_constant" public_interface="out" name="k2_" initial_value="32.9"/>
      <variable units="second_order_rate_constant" public_interface="out" name="k3" initial_value="0.1149E14"/>
      <variable units="first_order_rate_constant" public_interface="out" name="k3_" initial_value="4216.0"/>
      <variable units="second_order_rate_constant" public_interface="out" name="k4" initial_value="0.1149E14"/>
      <variable units="first_order_rate_constant" public_interface="out" name="k4_" initial_value="15777.0"/>
   </component>
 
   <connection>
      <map_components component_2="environment" component_1="Ca"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
  
   <connection>
      <map_components component_2="environment" component_1="Fluo"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
  
   <connection>
      <map_components component_2="environment" component_1="Pr"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
  
   <connection>
      <map_components component_2="environment" component_1="PrFluo"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
  
   <connection>
      <map_components component_2="environment" component_1="CaFluo"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
  
   <connection>
      <map_components component_2="environment" component_1="CaPrFluo"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>

   <connection>
      <map_components component_2="Fluo" component_1="Ca"/>
      <map_variables variable_2="Ca" variable_1="Ca"/>
      <map_variables variable_2="Fluo" variable_1="Fluo"/>
   </connection>

   <connection>
      <map_components component_2="CaFluo" component_1="Ca"/>
      <map_variables variable_2="Ca" variable_1="Ca"/>
      <map_variables variable_2="CaFluo" variable_1="CaFluo"/>
   </connection>
   
   <connection>
      <map_components component_2="PrFluo" component_1="Ca"/>
      <map_variables variable_2="Ca" variable_1="Ca"/>
      <map_variables variable_2="PrFluo" variable_1="PrFluo"/>
   </connection>

   <connection>
      <map_components component_2="CaPrFluo" component_1="Ca"/>
      <map_variables variable_2="Ca" variable_1="Ca"/>
      <map_variables variable_2="CaPrFluo" variable_1="CaPrFluo"/>
   </connection>

   <connection>
      <map_components component_2="CaFluo" component_1="Fluo"/>
      <map_variables variable_2="Fluo" variable_1="Fluo"/>
      <map_variables variable_2="CaFluo" variable_1="CaFluo"/>
   </connection>
   
   <connection>
      <map_components component_2="PrFluo" component_1="Fluo"/>
      <map_variables variable_2="Fluo" variable_1="Fluo"/>
      <map_variables variable_2="PrFluo" variable_1="PrFluo"/>
   </connection>

   <connection>
      <map_components component_2="Pr" component_1="Fluo"/>
      <map_variables variable_2="Fluo" variable_1="Fluo"/>
      <map_variables variable_2="Pr" variable_1="Pr"/>
   </connection>

   <connection>
      <map_components component_2="CaFluo" component_1="Pr"/>
      <map_variables variable_2="Pr" variable_1="Pr"/>
      <map_variables variable_2="CaFluo" variable_1="CaFluo"/>
   </connection>
   
   <connection>
      <map_components component_2="PrFluo" component_1="Pr"/>
      <map_variables variable_2="Pr" variable_1="Pr"/>
      <map_variables variable_2="PrFluo" variable_1="PrFluo"/>
   </connection>

   <connection>
      <map_components component_2="CaPrFluo" component_1="Pr"/>
      <map_variables variable_2="Pr" variable_1="Pr"/>
      <map_variables variable_2="CaPrFluo" variable_1="CaPrFluo"/>
   </connection>

   <connection>
      <map_components component_2="CaPrFluo" component_1="PrFluo"/>
      <map_variables variable_2="PrFluo" variable_1="PrFluo"/>
      <map_variables variable_2="CaPrFluo" variable_1="CaPrFluo"/>
   </connection>

   <connection>
      <map_components component_2="CaPrFluo" component_1="CaFluo"/>
      <map_variables variable_2="CaFluo" variable_1="CaFluo"/>
      <map_variables variable_2="CaPrFluo" variable_1="CaPrFluo"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="Ca"/>
      <map_variables variable_2="k1" variable_1="k1"/>
      <map_variables variable_2="k1_" variable_1="k1_"/>
      <map_variables variable_2="k2" variable_1="k2"/>
      <map_variables variable_2="k2_" variable_1="k2_"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="Fluo"/>
      <map_variables variable_2="k1" variable_1="k1"/>
      <map_variables variable_2="k1_" variable_1="k1_"/>
      <map_variables variable_2="k3" variable_1="k3"/>
      <map_variables variable_2="k3_" variable_1="k3_"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="Pr"/>
      <map_variables variable_2="k3" variable_1="k3"/>
      <map_variables variable_2="k3_" variable_1="k3_"/>
      <map_variables variable_2="k4" variable_1="k4"/>
      <map_variables variable_2="k4_" variable_1="k4_"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="PrFluo"/>
      <map_variables variable_2="k2" variable_1="k2"/>
      <map_variables variable_2="k2_" variable_1="k2_"/>
      <map_variables variable_2="k3" variable_1="k3"/>
      <map_variables variable_2="k3_" variable_1="k3_"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="CaFluo"/>
      <map_variables variable_2="k1" variable_1="k1"/>
      <map_variables variable_2="k1_" variable_1="k1_"/>
      <map_variables variable_2="k4" variable_1="k4"/>
      <map_variables variable_2="k4_" variable_1="k4_"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="CaPrFluo"/>
      <map_variables variable_2="k2" variable_1="k2"/>
      <map_variables variable_2="k2_" variable_1="k2_"/>
      <map_variables variable_2="k4" variable_1="k4"/>
      <map_variables variable_2="k4_" variable_1="k4_"/>
   </connection>



<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#469a85be-6bae-442e-8dc9-7d8e343bd297">
    <rdf:li>skeletal muscle</rdf:li>
    <rdf:li>calcium dynamics</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#f4b6344b-423b-437b-b7fa-b768b2d6d904">
    <rdf:li rdf:resource="rdf:#ba2b9332-2849-4e7b-aa79-a37e922912ce"/>
    <rdf:li rdf:resource="rdf:#551e909d-1b08-45a2-934f-f32292a7397c"/>
    <rdf:li rdf:resource="rdf:#f71abaf8-cb1e-4f0a-b160-e0532ca71df4"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#8dea57fd-839d-45d9-91eb-e2482fa96d1f">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#469a85be-6bae-442e-8dc9-7d8e343bd297"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#afa09d84-ac85-4344-bc8d-52e3fae84a9f">
    <dcterms:W3CDTF>2009-05-05T12:09:12+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:title>Comparison of Simulated and Measured Calcium Sparks in Intact Skeletal Muscle Fibers of the Frog (Reaction B)</dc:title>
    <dc:publisher>The University of Auckland, Auckland Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#facf8987-fbdf-4498-bffc-91456a8da218"/>
    <dcterms:created rdf:resource="rdf:#753f59a6-4b13-46d8-96eb-6586bea68956"/>
    <dc:creator rdf:resource="rdf:#ded4d862-a3ad-4277-8e62-76981f86109c"/>
    <cmeta:modification rdf:resource="rdf:#dc5585ea-c0f9-446a-9e06-ddd15c05db16"/>
    <cmeta:modification rdf:resource="rdf:#3641629d-1534-45dd-ad73-d5618607724b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b368f7bb-067d-4af0-83bb-a6697cee523d">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#dc5585ea-c0f9-446a-9e06-ddd15c05db16">
    <dcterms:modified rdf:resource="rdf:#afa09d84-ac85-4344-bc8d-52e3fae84a9f"/>
    <rdf:value>updated curation status</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#c31955a0-d002-4539-be10-9e4999f80ce8"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0fd56b13-cee7-4f37-9764-d1f6bd4440db">
    <dc:title>Journal of General Physiology</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c31955a0-d002-4539-be10-9e4999f80ce8">
    <vCard:N rdf:resource="rdf:#b368f7bb-067d-4af0-83bb-a6697cee523d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7fcc75a4-78fd-4bf4-9589-b554777a40f5">
    <dcterms:W3CDTF>2007-06-05T09:15:26+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f71abaf8-cb1e-4f0a-b160-e0532ca71df4">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#c04d7e15-4684-4e85-bafc-c067e55803ba"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#551e909d-1b08-45a2-934f-f32292a7397c">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#f09130c1-fbda-4de8-a644-1ad3924bf82e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ba2b9332-2849-4e7b-aa79-a37e922912ce">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#0eb683b8-3a91-40ff-81e7-e2b3b0d439fc"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bf380738-1ace-4479-be00-1b25e853a25b">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#03fa8ab9-4978-468b-aa56-0c7f19ce7b11">
    <dc:subject rdf:resource="rdf:#8dea57fd-839d-45d9-91eb-e2482fa96d1f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#88504444-da3d-44fb-b90b-a9cf1b7ec786">
    <dc:creator rdf:resource="rdf:#881ccf72-4883-41e2-aa8d-cb449d76a06b"/>
    <rdf:value>This is the CellML description of Baylor, Hollingworth and Chandler's &#13;
          2002 model of the Ca2+-ATP binding reaction in skeletal myocytes.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#881ccf72-4883-41e2-aa8d-cb449d76a06b">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3641629d-1534-45dd-ad73-d5618607724b">
    <dcterms:modified rdf:resource="rdf:#7fcc75a4-78fd-4bf4-9589-b554777a40f5"/>
    <rdf:value>The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics.  This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology.&#13;
&#13;
The model runs in the PCEnv simulator but gives a flat/almost flat output.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#f68f09ca-85f7-46ae-aa9d-7a138deba3b7"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#753f59a6-4b13-46d8-96eb-6586bea68956">
    <dcterms:W3CDTF>2007-05-23T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7ec9e55b-36af-4efc-bde6-82bcd0407e26">
    <dc:creator rdf:resource="rdf:#f4b6344b-423b-437b-b7fa-b768b2d6d904"/>
    <dc:title>Comparison of Simulated and Measured Calcium Sparks in Intact Skeletal Muscle Fibers of the Frog</dc:title>
    <bqs:volume>120</bqs:volume>
    <bqs:first_page>349</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#0fd56b13-cee7-4f37-9764-d1f6bd4440db"/>
    <dcterms:issued rdf:resource="rdf:#f05c33df-94a8-49ea-8fc4-a7514189da9d"/>
    <bqs:last_page>368</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2ebb50e8-40ef-4b31-8d69-3b6b15b88619">
    <bqs:Pubmed_id>12198091</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#7ec9e55b-36af-4efc-bde6-82bcd0407e26"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c04d7e15-4684-4e85-bafc-c067e55803ba">
    <vCard:Given>W</vCard:Given>
    <vCard:Family>Chandler</vCard:Family>
    <vCard:Other>K</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#19af8f9c-4dba-46a9-8d6f-b58dde2bb9f5">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3efd1856-5538-4504-8b5e-e718606b9737">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d56923cc-c503-4aa9-b3bd-9f82da31f1c6">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0fb48098-c730-4e89-a08a-8d95c6808a1a">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f09130c1-fbda-4de8-a644-1ad3924bf82e">
    <vCard:Given>S</vCard:Given>
    <vCard:Family>Hollingworth</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ded4d862-a3ad-4277-8e62-76981f86109c">
    <vCard:ORG rdf:resource="rdf:#3efd1856-5538-4504-8b5e-e718606b9737"/>
    <vCard:EMAIL rdf:resource="rdf:#19af8f9c-4dba-46a9-8d6f-b58dde2bb9f5"/>
    <vCard:N rdf:resource="rdf:#bf380738-1ace-4479-be00-1b25e853a25b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#facf8987-fbdf-4498-bffc-91456a8da218">
    <dc:creator rdf:resource="rdf:#0fb48098-c730-4e89-a08a-8d95c6808a1a"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f05c33df-94a8-49ea-8fc4-a7514189da9d">
    <dcterms:W3CDTF>2002-09-01</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="#baylor_2002b">
    <dc:title>
        Baylor, Hollingworth and Chandler's 2002 model of the Ca2+-ATP binding 
        reaction in skeletal myocytes.
      </dc:title>
    <cmeta:bio_entity>Skeletal Myocyte</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#88504444-da3d-44fb-b90b-a9cf1b7ec786"/>
    <bqs:reference rdf:resource="rdf:#03fa8ab9-4978-468b-aa56-0c7f19ce7b11"/>
    <bqs:reference rdf:resource="rdf:#2ebb50e8-40ef-4b31-8d69-3b6b15b88619"/>
    <cmeta:species>Frog</cmeta:species>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0eb683b8-3a91-40ff-81e7-e2b3b0d439fc">
    <vCard:Given>S</vCard:Given>
    <vCard:Family>Baylor</vCard:Family>
    <vCard:Other>M</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f68f09ca-85f7-46ae-aa9d-7a138deba3b7">
    <vCard:N rdf:resource="rdf:#d56923cc-c503-4aa9-b3bd-9f82da31f1c6"/>
  </rdf:Description>
</rdf:RDF>
</model>