<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :baylor_2002d.xml

CREATED :  23rd May 2007

LAST MODIFIED : 23rd May 2007

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.

DESCRIPTION :  This file contains a CellML description of Baylor, Hollingworth and Chandler's 2002 model of the Ca2+-ATP binding reaction in skeletal myocytes.

CHANGES:  
 
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="baylor_2002d" name="baylor_2002d">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Comparison of simulated and measured calcium sparks in intact skeletal muscle fibers of the frog</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>

    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
     <section id="sec_status">
    <title>Model Status</title>
    <para>This CellML model runs in OpenCell and COR and the units are consistent. There are no simple figures of concentration against time in the publication to compare the CellML model simulation output against.
</para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: Calcium sparks in frog intact skeletal muscle fibers were modeled as stereotypical events that arise from a constant efflux of Ca(2+) from a point source for a fixed period of time (e.g., 2.5 pA of Ca(2+) current for 4.6 ms; 18 degrees C). The model calculates the local changes in the concentrations of free Ca(2+) and of Ca(2+) bound to the major intrinsic myoplasmic Ca(2+) buffers (troponin, ATP, parvalbumin, and the SR Ca(2+) pump) and to the Ca(2+) indicator (fluo-3). A distinctive feature of the model is the inclusion of a binding reaction between fluo-3 and myoplasmic proteins, a process that strongly affects fluo-3's Ca(2+)-reaction kinetics, its apparent diffusion constant, and hence the morphology of sparks. DeltaF/F (the change in fluo-3's fluorescence divided by its resting fluorescence) was estimated from the calculated changes in fluo-3 convolved with the microscope point-spread function. To facilitate comparisons with measured sparks, noise and other sources of variability were included in a random repetitive fashion to generate a large number of simulated sparks that could be analyzed in the same way as the measured sparks. In the initial simulations, the binding of Ca(2+) to the two regulatory sites on troponin was assumed to follow identical and independent binding reactions. These simulations failed to accurately predict the falling phase of the measured sparks. A second set of simulations, which incorporated the idea of positive cooperativity in the binding of Ca(2+) to troponin, produced reasonable agreement with the measurements. Under the assumption that the single channel Ca(2+) current of a ryanodine receptor (RYR) is 0.5-2 pA, the results suggest that 1-5 active RYRs generate an average Ca(2+) spark in a frog intact muscle fiber. 
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Comparison of simulated and measured calcium sparks in intact skeletal muscle fibers of the frog, S.M. Baylor, S. Hollingworth and W.K. Chandler, 2002, <emphasis>Journal of General Physiology</emphasis>, 120, 349-368. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/12198091">PubMed ID: 12198091</ulink> 
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <imagedata fileref="baylor_2002.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagrams of the Ca<superscript>2+</superscript> binding reactions for various buffers and indicators: <emphasis role="bold">A</emphasis>  The reaction of Ca<superscript>2+</superscript> with ATP in the presence of free Mg<superscript>2+</superscript>, <emphasis role="bold">B</emphasis>  Reaction of Ca<superscript>2+</superscript> with protein (Pr) and fluo-3 (Fluo), <emphasis role="bold">C</emphasis>  Competitive reaction of Ca<superscript>2+</superscript> and Mg<superscript>2+</superscript> with parvalbumin (Parv), <emphasis role="bold">D</emphasis>  Binding reaction of Ca<superscript>2+</superscript> binding and transport by the sarcoplasmic reticulum Ca<superscript>2+</superscript> pump (E), <emphasis role="bold">E</emphasis>  One-step reaction of Ca<superscript>2+</superscript> with Troponin (Trop), and <emphasis role="bold">F</emphasis>  Two-step reaction of Ca<superscript>2+</superscript> with Troponin (Trop).</caption>

</informalfigure>

</sect1>
</article>
</documentation>    
  
   <units name="micromolar">
      <unit units="mole" prefix="micro"/>
      <unit units="litre" exponent="-1"/>
   </units>
   
   <units name="first_order_rate_constant">
      <unit units="second" exponent="-1"/>
   </units>
  
   <units name="second_order_rate_constant">
      <unit units="micromolar" exponent="-1"/>
      <unit units="second" exponent="-1"/>
   </units>
   
  
   <component name="environment">
      <variable units="second" public_interface="out" name="time"/>
   </component>
   
   
   <component cmeta:id="Ca" name="Ca">
      <variable units="micromolar" public_interface="out" name="Ca" initial_value="0.05"/>
     
      <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k1_"/>
      <variable units="second_order_rate_constant" public_interface="in" name="k3"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k3_"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k4"/>
      <variable units="second_order_rate_constant" public_interface="in" name="k4_"/>
      <variable units="micromolar" public_interface="in" name="E"/>
      <variable units="micromolar" public_interface="in" name="CaE"/>
      <variable units="micromolar" public_interface="in" name="Ca2E_"/>
      <variable units="micromolar" public_interface="in" name="CaE_"/>
      <variable units="second" public_interface="in" name="time"/>
      
      <math xmlns="http://www.w3.org/1998/Math/MathML">
        <apply>
        <eq/>
          <apply>
          <diff/> 
            <bvar>
            <ci>time</ci>
          </bvar> 
            <ci> Ca </ci> 
          </apply>
          <apply>
          <minus/>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k1_ </ci>
                <ci> CaE </ci>
              </apply>
              <apply>
              <times/>
                <ci> k3_ </ci>
                <ci> Ca2E_ </ci>
              </apply>
              <apply>
              <times/>
                <ci> k4 </ci>
                <ci> Ca2E_ </ci>
              </apply>
            </apply>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k1 </ci>
                <ci> Ca </ci>
                <ci> E </ci>
              </apply>
              <apply>
              <times/>
                <ci> k3 </ci>
                <ci> Ca </ci>
                <ci> CaE_ </ci>
              </apply>
              <apply>
              <times/>
                <ci> k4_ </ci>
                <cn cellml:units="dimensionless"> 2.0 </cn>
                <ci> Ca </ci>
                <ci> E </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </math>
   </component>
  
   <component cmeta:id="E" name="E">
      <variable units="micromolar" public_interface="out" name="E" initial_value="240.0"/>
      
      <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k1_"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k4"/>
      <variable units="second_order_rate_constant" public_interface="in" name="k4_"/>
      <variable units="micromolar" public_interface="in" name="Ca"/>
      <variable units="micromolar" public_interface="in" name="CaE"/>
      <variable units="micromolar" public_interface="in" name="Ca2E_"/>
      <variable units="second" public_interface="in" name="time"/>
      
      <math xmlns="http://www.w3.org/1998/Math/MathML">
        <apply>
        <eq/>
          <apply>
          <diff/> 
            <bvar>
            <ci>time</ci>
          </bvar> 
            <ci> E </ci> 
          </apply>
          <apply>
          <minus/>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k1_ </ci>
                <ci> CaE </ci>
              </apply>
              <apply>
              <times/>
                <ci> k4 </ci>
                <ci> Ca2E_ </ci>
              </apply>
            </apply>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k1 </ci>
                <ci> Ca </ci>
                <ci> E </ci>
              </apply>
              <apply>
              <times/>
                <ci> k4_ </ci>
                <cn cellml:units="dimensionless"> 2.0 </cn>
                <ci> Ca </ci>
                <ci> E </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </math>
   </component>
  
   <component cmeta:id="CaE" name="CaE">
      <variable units="micromolar" public_interface="out" name="CaE" initial_value="0.01"/>
      
      <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k1_"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k2"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k2_"/>
      <variable units="micromolar" public_interface="in" name="Ca"/>
      <variable units="micromolar" public_interface="in" name="E"/>
      <variable units="micromolar" public_interface="in" name="CaE_"/>
      <variable units="second" public_interface="in" name="time"/>
      
      <math xmlns="http://www.w3.org/1998/Math/MathML">
        <apply>
        <eq/>
          <apply>
          <diff/> 
            <bvar>
            <ci>time</ci>
          </bvar> 
            <ci> CaE </ci> 
          </apply>
          <apply>
          <minus/>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k1 </ci>
                <ci> Ca </ci>
                <ci> E </ci>
              </apply>
              <apply>
              <times/>
                <ci> k2_ </ci>
                <ci> CaE_ </ci>
              </apply>
            </apply>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k1_ </ci>
                <ci> CaE </ci>
              </apply>
              <apply>
              <times/>
                <ci> k2 </ci>
                <ci> CaE </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </math>
   </component>
  
   <component cmeta:id="Ca2E_" name="Ca2E_">
      <variable units="micromolar" public_interface="out" name="Ca2E_" initial_value="1.0"/>
      
      <variable units="second_order_rate_constant" public_interface="in" name="k3"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k3_"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k4"/>
      <variable units="second_order_rate_constant" public_interface="in" name="k4_"/>
      <variable units="micromolar" public_interface="in" name="Ca"/>
      <variable units="micromolar" public_interface="in" name="CaE_"/>
      <variable units="micromolar" public_interface="in" name="E"/>
      <variable units="second" public_interface="in" name="time"/>
      
      <math xmlns="http://www.w3.org/1998/Math/MathML">
        <apply>
        <eq/>
          <apply>
          <diff/> 
            <bvar>
            <ci>time</ci>
          </bvar> 
            <ci> Ca2E_ </ci> 
          </apply>
          <apply>
          <minus/>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k3 </ci>
                <ci> CaE_ </ci>
                <ci> Ca </ci>
              </apply>
              <apply>
              <times/>
                <ci> k4_ </ci>
                <ci> E </ci>
				<cn cellml:units="dimensionless"> 2.0 </cn>
                <ci> Ca </ci>
              </apply>
            </apply>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k3_ </ci>
                <ci> Ca2E_ </ci>
              </apply>
              <apply>
              <times/>
                <ci> k4 </ci>
                <ci> Ca2E_ </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </math>
   </component>
  
   <component cmeta:id="CaE_" name="CaE_">
      <variable units="micromolar" public_interface="out" name="CaE_" initial_value="0.01"/>
      
      <variable units="second_order_rate_constant" public_interface="in" name="k3"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k3_"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k2"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k2_"/>
      <variable units="micromolar" public_interface="in" name="Ca"/>
      <variable units="micromolar" public_interface="in" name="CaE"/>
      <variable units="micromolar" public_interface="in" name="Ca2E_"/>
      <variable units="second" public_interface="in" name="time"/>
      
      <math xmlns="http://www.w3.org/1998/Math/MathML">
        <apply>
        <eq/>
          <apply>
          <diff/> 
            <bvar>
            <ci>time</ci>
          </bvar> 
            <ci> CaE_ </ci> 
          </apply>
          <apply>
          <minus/>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k3_ </ci>
                <ci> Ca2E_ </ci>
              </apply>
              <apply>
              <times/>
                <ci> k2 </ci>
                <ci> CaE </ci>
              </apply>
            </apply>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k2_ </ci>
                <ci> CaE_ </ci>
              </apply>
              <apply>
              <times/>
                <ci> k3 </ci>
                <ci> Ca </ci>
                <ci> CaE_ </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </math>
   </component>
   
   <component name="reaction_constants">
      <variable units="second_order_rate_constant" public_interface="out" name="k1" initial_value="1.0E14"/>
      <variable units="first_order_rate_constant" public_interface="out" name="k1_" initial_value="1000.0"/>
      <variable units="first_order_rate_constant" public_interface="out" name="k2" initial_value="500.0"/>
      <variable units="first_order_rate_constant" public_interface="out" name="k2_" initial_value="1200.0"/>
      <variable units="second_order_rate_constant" public_interface="out" name="k3" initial_value="1.0E14"/>
      <variable units="first_order_rate_constant" public_interface="out" name="k3_" initial_value="10.0"/>
      <variable units="first_order_rate_constant" public_interface="out" name="k4" initial_value="20.0"/>
      <variable units="second_order_rate_constant" public_interface="out" name="k4_" initial_value="0.0"/>
   </component>
  
   
   <connection>
      <map_components component_2="environment" component_1="Ca"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="environment" component_1="E"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="environment" component_1="CaE"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
  
   <connection>
      <map_components component_2="environment" component_1="Ca2E_"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
  
   <connection>
      <map_components component_2="environment" component_1="CaE_"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>

   <connection>
      <map_components component_2="E" component_1="Ca"/>
      <map_variables variable_2="Ca" variable_1="Ca"/>
      <map_variables variable_2="E" variable_1="E"/>
   </connection>

   <connection>
      <map_components component_2="CaE" component_1="Ca"/>
      <map_variables variable_2="Ca" variable_1="Ca"/>
      <map_variables variable_2="CaE" variable_1="CaE"/>
   </connection>

   <connection>
      <map_components component_2="CaE_" component_1="Ca"/>
      <map_variables variable_2="Ca" variable_1="Ca"/>
      <map_variables variable_2="CaE_" variable_1="CaE_"/>
   </connection>

   <connection>
      <map_components component_2="Ca2E_" component_1="Ca"/>
      <map_variables variable_2="Ca" variable_1="Ca"/>
      <map_variables variable_2="Ca2E_" variable_1="Ca2E_"/>
   </connection>

   <connection>
      <map_components component_2="E" component_1="Ca2E_"/>
      <map_variables variable_2="Ca2E_" variable_1="Ca2E_"/>
      <map_variables variable_2="E" variable_1="E"/>
   </connection>

   <connection>
      <map_components component_2="E" component_1="CaE"/>
      <map_variables variable_2="CaE" variable_1="CaE"/>
      <map_variables variable_2="E" variable_1="E"/>
   </connection>

   <connection>
      <map_components component_2="CaE" component_1="CaE_"/>
      <map_variables variable_2="CaE_" variable_1="CaE_"/>
      <map_variables variable_2="CaE" variable_1="CaE"/>
   </connection>

   <connection>
      <map_components component_2="Ca2E_" component_1="CaE_"/>
      <map_variables variable_2="CaE_" variable_1="CaE_"/>
      <map_variables variable_2="Ca2E_" variable_1="Ca2E_"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="Ca"/>
      <map_variables variable_2="k1" variable_1="k1"/>
      <map_variables variable_2="k1_" variable_1="k1_"/>
      <map_variables variable_2="k3" variable_1="k3"/>
      <map_variables variable_2="k3_" variable_1="k3_"/>
      <map_variables variable_2="k4" variable_1="k4"/>
      <map_variables variable_2="k4_" variable_1="k4_"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="E"/>
      <map_variables variable_2="k1" variable_1="k1"/>
      <map_variables variable_2="k1_" variable_1="k1_"/>
      <map_variables variable_2="k4" variable_1="k4"/>
      <map_variables variable_2="k4_" variable_1="k4_"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="CaE"/>
      <map_variables variable_2="k1" variable_1="k1"/>
      <map_variables variable_2="k1_" variable_1="k1_"/>
      <map_variables variable_2="k2" variable_1="k2"/>
      <map_variables variable_2="k2_" variable_1="k2_"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="Ca2E_"/>
      <map_variables variable_2="k3" variable_1="k3"/>
      <map_variables variable_2="k3_" variable_1="k3_"/>
      <map_variables variable_2="k4" variable_1="k4"/>
      <map_variables variable_2="k4_" variable_1="k4_"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="CaE_"/>
      <map_variables variable_2="k3" variable_1="k3"/>
      <map_variables variable_2="k3_" variable_1="k3_"/>
      <map_variables variable_2="k2" variable_1="k2"/>
      <map_variables variable_2="k2_" variable_1="k2_"/>
   </connection>


<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#680dd1c8-6efc-4820-9cca-fbc37085399d">
    <rdf:li>skeletal muscle</rdf:li>
    <rdf:li>calcium dynamics</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#2244bb31-304b-46d0-9a76-d353a7590448">
    <rdf:li rdf:resource="rdf:#5144f89e-fb93-49f7-9a0d-b18e66cb8c29"/>
    <rdf:li rdf:resource="rdf:#13a7fe7e-e6b3-45c8-a47c-594957c5f6dc"/>
    <rdf:li rdf:resource="rdf:#0f0004ad-8b80-4258-96d7-55da1ea8485d"/>
  </rdf:Seq>
  <rdf:Description rdf:about="">
    <dc:title>Comparison of Simulated and Measured Calcium Sparks in Intact Skeletal Muscle Fibers of the Frog (Reaction D)</dc:title>
	<dc:publisher>The University of Auckland, Auckland Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#4f4dafd4-44bf-4912-8119-2b2984e97bd4"/>
    <dcterms:created rdf:resource="rdf:#5366ccb3-efa3-45dd-91e2-effb2ad6b619"/>
    <dc:creator rdf:resource="rdf:#5812fdbf-c384-4a00-aaaf-595e410d2180"/>
    <cmeta:modification rdf:resource="rdf:#5ea4418b-b258-4191-9238-191e312b91f6"/>
    <cmeta:modification rdf:resource="rdf:#47a31788-5b67-41d2-be4e-69a4e5d2bc27"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#47a31788-5b67-41d2-be4e-69a4e5d2bc27">
    <dcterms:modified rdf:resource="rdf:#7079b919-493c-40d4-b5a2-5ddb7123b7b3"/>
    <rdf:value>The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics.  This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology.&#13;
&#13;
The model runs in the PCEnv simulator but gives a flat/almost flat output.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#97cd8219-fe3c-4f52-9235-c738a3ad33c4"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#72f11d66-4051-4a5a-b16b-0240f5daf222">
    <dc:subject rdf:resource="rdf:#45a9b2c9-d83f-42b9-aaf2-3ee3eca1b3f3"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#13a7fe7e-e6b3-45c8-a47c-594957c5f6dc">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#cbe4d873-a38d-4d22-9b66-8f09b3d29799"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d1fc1c9a-e7de-494a-aa1d-9c85815ffc76">
    <dc:creator rdf:resource="rdf:#0c687672-4e55-4341-a4bb-4fc1e484d067"/>
    <rdf:value>This is the CellML description of Baylor, Hollingworth and Chandler's&#13;
          2002 model of the Ca2+-ATP binding reaction in skeletal myocytes.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9ca06018-bb75-4bb9-89ef-bcfbae3cdb72">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#45a9b2c9-d83f-42b9-aaf2-3ee3eca1b3f3">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#680dd1c8-6efc-4820-9cca-fbc37085399d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#79acef29-46b3-4998-b66e-8e6977ccfaf7">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5144f89e-fb93-49f7-9a0d-b18e66cb8c29">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#3e7e197e-c8b9-43a2-bb19-a7fa70cf1fb5"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#55421b0c-5905-4a30-be53-a16b48392243">
    <vCard:N rdf:resource="rdf:#44c6b6b1-0bcd-4800-ba97-a28cd488e79e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5366ccb3-efa3-45dd-91e2-effb2ad6b619">
    <dcterms:W3CDTF>2007-05-23T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7079b919-493c-40d4-b5a2-5ddb7123b7b3">
    <dcterms:W3CDTF>2007-06-05T09:14:32+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3e7e197e-c8b9-43a2-bb19-a7fa70cf1fb5">
    <vCard:Given>S</vCard:Given>
    <vCard:Family>Baylor</vCard:Family>
    <vCard:Other>M</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bfd614b0-f8c0-42fc-b268-d5559cc95e0c">
    <vCard:Given>W</vCard:Given>
    <vCard:Family>Chandler</vCard:Family>
    <vCard:Other>K</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#44c6b6b1-0bcd-4800-ba97-a28cd488e79e">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="#baylor_2002d">
    <dc:title>
        Baylor, Hollingworth and Chandler's 2002 model of the Ca2+-ATP binding
        reaction in skeletal myocytes.
      </dc:title>
    <cmeta:bio_entity>Skeletal Myocyte</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#d1fc1c9a-e7de-494a-aa1d-9c85815ffc76"/>
    <bqs:reference rdf:resource="rdf:#72f11d66-4051-4a5a-b16b-0240f5daf222"/>
    <bqs:reference rdf:resource="rdf:#8e643e2e-54ba-46eb-ae66-06dc33853925"/>
    <cmeta:species>Frog</cmeta:species>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0417a826-5a46-4154-b034-cdb8f6a8107a">
    <dcterms:W3CDTF>2002-09-01</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4f4dafd4-44bf-4912-8119-2b2984e97bd4">
    <dc:creator rdf:resource="rdf:#9ca06018-bb75-4bb9-89ef-bcfbae3cdb72"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a021e1ce-5b9c-4bed-92cc-9066aec2614a">
    <dc:title>Journal of General Physiology</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0c687672-4e55-4341-a4bb-4fc1e484d067">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a1d55de1-b5b1-462a-9977-987a17129b2d">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#514eb6f3-02cf-479b-a9d4-cd5614638f06">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5812fdbf-c384-4a00-aaaf-595e410d2180">
    <vCard:ORG rdf:resource="rdf:#9d7bfc93-9438-49ba-8692-ad58bda4d5f8"/>
    <vCard:EMAIL rdf:resource="rdf:#79acef29-46b3-4998-b66e-8e6977ccfaf7"/>
    <vCard:N rdf:resource="rdf:#514eb6f3-02cf-479b-a9d4-cd5614638f06"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#60eb616d-dfdc-4876-8987-077a2883ba60">
    <dcterms:W3CDTF>2009-05-05T12:10:17+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#97cd8219-fe3c-4f52-9235-c738a3ad33c4">
    <vCard:N rdf:resource="rdf:#a1d55de1-b5b1-462a-9977-987a17129b2d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8e643e2e-54ba-46eb-ae66-06dc33853925">
    <bqs:Pubmed_id>12198091</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#7de0ada9-d40d-46ba-b314-4de547b1509e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5ea4418b-b258-4191-9238-191e312b91f6">
    <dcterms:modified rdf:resource="rdf:#60eb616d-dfdc-4876-8987-077a2883ba60"/>
    <rdf:value>updated curation status</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#55421b0c-5905-4a30-be53-a16b48392243"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9d7bfc93-9438-49ba-8692-ad58bda4d5f8">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#cbe4d873-a38d-4d22-9b66-8f09b3d29799">
    <vCard:Given>S</vCard:Given>
    <vCard:Family>Hollingworth</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0f0004ad-8b80-4258-96d7-55da1ea8485d">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#bfd614b0-f8c0-42fc-b268-d5559cc95e0c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7de0ada9-d40d-46ba-b314-4de547b1509e">
    <dc:creator rdf:resource="rdf:#2244bb31-304b-46d0-9a76-d353a7590448"/>
    <dc:title>Comparison of Simulated and Measured Calcium Sparks in Intact Skeletal Muscle Fibers of the Frog</dc:title>
    <bqs:volume>120</bqs:volume>
    <bqs:first_page>349</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#a021e1ce-5b9c-4bed-92cc-9066aec2614a"/>
    <dcterms:issued rdf:resource="rdf:#0417a826-5a46-4154-b034-cdb8f6a8107a"/>
    <bqs:last_page>368</bqs:last_page>
  </rdf:Description>
</rdf:RDF>
</model>