<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :baylor_2002f.xml

CREATED :  23rd May 2007

LAST MODIFIED : 23rd May 2007

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.

DESCRIPTION :  This file contains a CellML description of Baylor, Hollingworth and Chandler's 2002 model of the Ca2+-ATP binding reaction in skeletal myocytes.

CHANGES:  
  

--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="baylor_2002f" name="baylor_2002f">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Comparison of simulated and measured calcium sparks in intact skeletal muscle fibers of the frog</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>

    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
     <section id="sec_status">
    <title>Model Status</title>
    <para>This CellML model runs in OpenCell and COR and the units are consistent. There are no simple figures of concentration against time in the publication to compare the CellML model simulation output against.
</para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: Calcium sparks in frog intact skeletal muscle fibers were modeled as stereotypical events that arise from a constant efflux of Ca(2+) from a point source for a fixed period of time (e.g., 2.5 pA of Ca(2+) current for 4.6 ms; 18 degrees C). The model calculates the local changes in the concentrations of free Ca(2+) and of Ca(2+) bound to the major intrinsic myoplasmic Ca(2+) buffers (troponin, ATP, parvalbumin, and the SR Ca(2+) pump) and to the Ca(2+) indicator (fluo-3). A distinctive feature of the model is the inclusion of a binding reaction between fluo-3 and myoplasmic proteins, a process that strongly affects fluo-3's Ca(2+)-reaction kinetics, its apparent diffusion constant, and hence the morphology of sparks. DeltaF/F (the change in fluo-3's fluorescence divided by its resting fluorescence) was estimated from the calculated changes in fluo-3 convolved with the microscope point-spread function. To facilitate comparisons with measured sparks, noise and other sources of variability were included in a random repetitive fashion to generate a large number of simulated sparks that could be analyzed in the same way as the measured sparks. In the initial simulations, the binding of Ca(2+) to the two regulatory sites on troponin was assumed to follow identical and independent binding reactions. These simulations failed to accurately predict the falling phase of the measured sparks. A second set of simulations, which incorporated the idea of positive cooperativity in the binding of Ca(2+) to troponin, produced reasonable agreement with the measurements. Under the assumption that the single channel Ca(2+) current of a ryanodine receptor (RYR) is 0.5-2 pA, the results suggest that 1-5 active RYRs generate an average Ca(2+) spark in a frog intact muscle fiber. 
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Comparison of simulated and measured calcium sparks in intact skeletal muscle fibers of the frog, S.M. Baylor, S. Hollingworth and W.K. Chandler, 2002, <emphasis>Journal of General Physiology</emphasis>, 120, 349-368. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/12198091">PubMed ID: 12198091</ulink> 
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <imagedata fileref="baylor_2002.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagrams of the Ca<superscript>2+</superscript> binding reactions for various buffers and indicators: <emphasis role="bold">A</emphasis>  The reaction of Ca<superscript>2+</superscript> with ATP in the presence of free Mg<superscript>2+</superscript>, <emphasis role="bold">B</emphasis>  Reaction of Ca<superscript>2+</superscript> with protein (Pr) and fluo-3 (Fluo), <emphasis role="bold">C</emphasis>  Competitive reaction of Ca<superscript>2+</superscript> and Mg<superscript>2+</superscript> with parvalbumin (Parv), <emphasis role="bold">D</emphasis>  Binding reaction of Ca<superscript>2+</superscript> binding and transport by the sarcoplasmic reticulum Ca<superscript>2+</superscript> pump (E), <emphasis role="bold">E</emphasis>  One-step reaction of Ca<superscript>2+</superscript> with Troponin (Trop), and <emphasis role="bold">F</emphasis>  Two-step reaction of Ca<superscript>2+</superscript> with Troponin (Trop).</caption>

</informalfigure>

</sect1>
</article>
</documentation>

   <units name="micromolar">
      <unit units="mole" prefix="micro"/>
      <unit units="litre" exponent="-1"/>
   </units>
   
   <units name="first_order_rate_constant">
      <unit units="second" exponent="-1"/>
   </units>
  
   <units name="second_order_rate_constant">
      <unit units="micromolar" exponent="-1"/>
      <unit units="second" exponent="-1"/>
   </units>
   
   
   <component name="environment">
      <variable units="second" public_interface="out" name="time"/>
   </component>
   
   
   <component cmeta:id="Ca" name="Ca">
      <variable units="micromolar" public_interface="out" name="Ca" initial_value="0.05"/>
      
      <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k1_"/>
      <variable units="second_order_rate_constant" public_interface="in" name="k2"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k2_"/>
      <variable units="micromolar" public_interface="in" name="Trop"/>
      <variable units="micromolar" public_interface="in" name="CaTrop"/>
      <variable units="micromolar" public_interface="in" name="Ca2Trop"/>
      <variable units="second" public_interface="in" name="time"/>
      
      <math xmlns="http://www.w3.org/1998/Math/MathML">
        <apply>
        <eq/>
          <apply>
          <diff/> 
            <bvar>
            <ci>time</ci>
          </bvar> 
            <ci> Ca </ci> 
          </apply>
          <apply>
          <minus/>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k1_ </ci>
                <ci> CaTrop </ci>
              </apply>
              <apply>
              <times/>
                <ci> k2_ </ci>
                <ci> Ca2Trop </ci>
              </apply> 
            </apply>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k1 </ci>
                <ci> Ca </ci>
                <ci> Trop </ci>
              </apply>
              <apply>
              <times/>
                <ci> k2 </ci>
                <ci> Ca </ci>
                <ci> CaTrop </ci>
              </apply> 
            </apply>
          </apply>
        </apply>
      </math>
   </component>
  
   <component cmeta:id="Trop" name="Trop">
      <variable units="micromolar" public_interface="out" name="Trop" initial_value="360.0"/>
     
      <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k1_"/>
      <variable units="micromolar" public_interface="in" name="Ca"/>
      <variable units="micromolar" public_interface="in" name="CaTrop"/>
      <variable units="second" public_interface="in" name="time"/>
      
      <math xmlns="http://www.w3.org/1998/Math/MathML">
        <apply>
        <eq/>
          <apply>
          <diff/> 
            <bvar>
            <ci>time</ci>
          </bvar> 
            <ci> Trop </ci> 
          </apply>
          <apply>
          <minus/>
            <apply>
            <times/>
              <ci> k1_ </ci>
              <ci> CaTrop </ci>
            </apply>
            <apply>
            <times/>
              <ci> k1 </ci>
              <ci> Ca </ci>
              <ci> Trop </ci>
            </apply>
          </apply>
        </apply>
      </math>
   </component>
   
   <component cmeta:id="CaTrop" name="CaTrop">
      <variable units="micromolar" public_interface="out" name="CaTrop" initial_value="0.01"/>
      
      <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k1_"/>
      <variable units="second_order_rate_constant" public_interface="in" name="k2"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k2_"/>
      <variable units="micromolar" public_interface="in" name="Trop"/>
      <variable units="micromolar" public_interface="in" name="Ca"/>
      <variable units="micromolar" public_interface="in" name="Ca2Trop"/>
      <variable units="second" public_interface="in" name="time"/>
      
      <math xmlns="http://www.w3.org/1998/Math/MathML">
        <apply>
        <eq/>
          <apply>
          <diff/> 
            <bvar>
            <ci>time</ci>
          </bvar> 
            <ci> CaTrop </ci> 
          </apply>
          <apply>
          <minus/>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k1 </ci>
                <ci> Ca </ci>
                <ci> Trop </ci>
              </apply>
              <apply>
              <times/>
                <ci> k2_ </ci>
                <ci> Ca2Trop </ci>
              </apply> 
            </apply>
            <apply>
            <plus/>
              <apply>
              <times/>
                <ci> k1_ </ci>
                <ci> CaTrop </ci>
              </apply>
              <apply>
              <times/>
                <ci> k2 </ci>
                <ci> Ca </ci>
                <ci> CaTrop </ci>
              </apply> 
            </apply>
          </apply>
        </apply>
      </math>
   </component>
   
   <component cmeta:id="Ca2Trop" name="Ca2Trop">
      <variable units="micromolar" public_interface="out" name="Ca2Trop" initial_value="0.01"/>
      
      <variable units="second_order_rate_constant" public_interface="in" name="k2"/>
      <variable units="first_order_rate_constant" public_interface="in" name="k2_"/>
      <variable units="micromolar" public_interface="in" name="Ca"/>
      <variable units="micromolar" public_interface="in" name="CaTrop"/>
      <variable units="second" public_interface="in" name="time"/>
      
      <math xmlns="http://www.w3.org/1998/Math/MathML">
        <apply>
        <eq/>
          <apply>
          <diff/> 
            <bvar>
            <ci>time</ci>
          </bvar> 
            <ci> Ca2Trop </ci> 
          </apply>
          <apply>
          <minus/>
            <apply>
            <times/>
              <ci> k2 </ci>
              <ci> Ca </ci>
              <ci> CaTrop </ci>
            </apply>
            <apply>
            <times/>
              <ci> k2_ </ci>
              <ci> Ca2Trop </ci>
            </apply>
          </apply>
        </apply>
      </math>
   </component>
   
   <component name="reaction_constants">
      <variable units="second_order_rate_constant" public_interface="out" name="k1" initial_value="2.033E14"/>
      <variable units="first_order_rate_constant" public_interface="out" name="k1_" initial_value="2642.0"/>
      <variable units="second_order_rate_constant" public_interface="out" name="k2" initial_value="1.017E14"/>
      <variable units="first_order_rate_constant" public_interface="out" name="k2_" initial_value="13.21"/>
   </component>
  
   
   <connection>
      <map_components component_2="environment" component_1="Ca"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
  
   <connection>
      <map_components component_2="environment" component_1="Trop"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="environment" component_1="CaTrop"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
  
   <connection>
      <map_components component_2="environment" component_1="Ca2Trop"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>

   <connection>
      <map_components component_2="Trop" component_1="Ca"/>
      <map_variables variable_2="Ca" variable_1="Ca"/>
      <map_variables variable_2="Trop" variable_1="Trop"/>
   </connection>

   <connection>
      <map_components component_2="CaTrop" component_1="Ca"/>
      <map_variables variable_2="Ca" variable_1="Ca"/>
      <map_variables variable_2="CaTrop" variable_1="CaTrop"/>
   </connection>
   
   <connection>
      <map_components component_2="Ca2Trop" component_1="Ca"/>
      <map_variables variable_2="Ca" variable_1="Ca"/>
      <map_variables variable_2="Ca2Trop" variable_1="Ca2Trop"/>
   </connection>
  
   <connection>
      <map_components component_2="CaTrop" component_1="Trop"/>
      <map_variables variable_2="Trop" variable_1="Trop"/>
      <map_variables variable_2="CaTrop" variable_1="CaTrop"/>
   </connection>

   <connection>
      <map_components component_2="Ca2Trop" component_1="CaTrop"/>
      <map_variables variable_2="CaTrop" variable_1="CaTrop"/>
      <map_variables variable_2="Ca2Trop" variable_1="Ca2Trop"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="Ca"/>
      <map_variables variable_2="k1" variable_1="k1"/>
      <map_variables variable_2="k1_" variable_1="k1_"/>
      <map_variables variable_2="k2" variable_1="k2"/>
      <map_variables variable_2="k2_" variable_1="k2_"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="Trop"/>
      <map_variables variable_2="k1" variable_1="k1"/>
      <map_variables variable_2="k1_" variable_1="k1_"/>
   </connection>
   
   <connection>
      <map_components component_2="reaction_constants" component_1="CaTrop"/>
      <map_variables variable_2="k1" variable_1="k1"/>
      <map_variables variable_2="k1_" variable_1="k1_"/>
      <map_variables variable_2="k2" variable_1="k2"/>
      <map_variables variable_2="k2_" variable_1="k2_"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="Ca2Trop"/>
      <map_variables variable_2="k2" variable_1="k2"/>
      <map_variables variable_2="k2_" variable_1="k2_"/>
   </connection>
   


<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#375f69f3-935a-4244-8bad-0aa5c490a9a1">
    <rdf:li>skeletal muscle</rdf:li>
    <rdf:li>calcium dynamics</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#dd79f2d5-8ce3-4dc3-8bcf-449cd6a61c99">
    <rdf:li rdf:resource="rdf:#dddce0f0-e450-4bdd-9f1d-05b146b4e5c7"/>
    <rdf:li rdf:resource="rdf:#e6d1f372-7992-44d9-ad3a-2a4358d7f626"/>
    <rdf:li rdf:resource="rdf:#34d95429-bc10-4e86-8ced-721c940f4df0"/>
  </rdf:Seq>
  <rdf:Description rdf:about="">
    <dc:title>Comparison of Simulated and Measured Calcium Sparks in Intact Skeletal Muscle Fibers of the Frog (Reaction F)</dc:title>
    <dc:publisher>The University of Auckland, Auckland Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#e2020bf4-d55e-4762-8ecc-82f5daae8a60"/>
    <dcterms:created rdf:resource="rdf:#0b82d35c-dd05-4dad-b7cf-c6a3acee56c9"/>
    <dc:creator rdf:resource="rdf:#244e11bf-27ff-4936-92af-e958b452c1f8"/>
    <cmeta:modification rdf:resource="rdf:#a842fa00-72cf-4907-a7fc-65d7b4144cd2"/>
    <cmeta:modification rdf:resource="rdf:#6168a10a-5755-4605-88f7-6eb9553637ff"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b46c8199-d3c7-4884-ae29-dacb2350bc30">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#375f69f3-935a-4244-8bad-0aa5c490a9a1"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#15906e55-ae49-423e-8288-c0e2ccb30c00">
    <vCard:Given>S</vCard:Given>
    <vCard:Family>Hollingworth</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#88f35f2a-6a78-4571-919d-649c09db8d0f">
    <vCard:Given>S</vCard:Given>
    <vCard:Family>Baylor</vCard:Family>
    <vCard:Other>M</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#28dec82a-16d1-4b3f-86df-87a81e380f6e">
    <bqs:Pubmed_id>12198091</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#2c3ad1e0-521c-4ff5-9d7f-51c03e7560b9"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0bddf72c-7b4b-43d8-b33c-da7f68b29552">
    <dcterms:W3CDTF>2007-06-05T09:10:31+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a842fa00-72cf-4907-a7fc-65d7b4144cd2">
    <dcterms:modified rdf:resource="rdf:#82073aea-be4e-4d25-824d-2707e180a175"/>
    <rdf:value>updated curation status</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#677cd6c6-4a6c-4725-b243-ed1aa04ddb6a"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f65d519b-6834-467a-b5c5-8d7bb94ebc3e">
    <dc:title>Journal of General Physiology</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1ea38335-7236-44f8-b193-8e5d9bc1ef23">
    <dc:creator rdf:resource="rdf:#dec470f4-829c-4c76-b16b-6a981312e125"/>
    <rdf:value>This is the CellML description of Baylor, Hollingworth and Chandler's&#13;
          2002 model of the Ca2+-ATP binding reaction in skeletal myocytes.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#dddce0f0-e450-4bdd-9f1d-05b146b4e5c7">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#88f35f2a-6a78-4571-919d-649c09db8d0f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e6d1f372-7992-44d9-ad3a-2a4358d7f626">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#15906e55-ae49-423e-8288-c0e2ccb30c00"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6529fe9e-1b39-4a17-b967-e5ddc8e8a9ff">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#677cd6c6-4a6c-4725-b243-ed1aa04ddb6a">
    <vCard:N rdf:resource="rdf:#c2bc9ff3-7d71-4859-9016-60dd9fafd3e9"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0b82d35c-dd05-4dad-b7cf-c6a3acee56c9">
    <dcterms:W3CDTF>2007-05-23T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b0d26302-5b06-463c-9602-3853e249146a">
    <dc:subject rdf:resource="rdf:#b46c8199-d3c7-4884-ae29-dacb2350bc30"/>
  </rdf:Description>
  <rdf:Description rdf:about="#baylor_2002f">
    <dc:title>
        Baylor, Hollingworth and Chandler's 2002 model of the Ca2+-ATP binding
        reaction in skeletal myocytes.
      </dc:title>
    <cmeta:bio_entity>Skeletal Myocyte</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#1ea38335-7236-44f8-b193-8e5d9bc1ef23"/>
    <bqs:reference rdf:resource="rdf:#28dec82a-16d1-4b3f-86df-87a81e380f6e"/>
    <bqs:reference rdf:resource="rdf:#b0d26302-5b06-463c-9602-3853e249146a"/>
    <cmeta:species>Frog</cmeta:species>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fcfd6565-5376-43d5-83fb-6c6ae6886816">
    <vCard:Given>W</vCard:Given>
    <vCard:Family>Chandler</vCard:Family>
    <vCard:Other>K</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#244e11bf-27ff-4936-92af-e958b452c1f8">
    <vCard:ORG rdf:resource="rdf:#6e9d66bf-d5c1-42da-8353-c57d4b947203"/>
    <vCard:EMAIL rdf:resource="rdf:#fdef2ae0-5450-430d-b7e3-3294de0dbbbf"/>
    <vCard:N rdf:resource="rdf:#681b32d0-9b5d-4221-8bb4-3de67ac7afeb"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2c3ad1e0-521c-4ff5-9d7f-51c03e7560b9">
    <dc:creator rdf:resource="rdf:#dd79f2d5-8ce3-4dc3-8bcf-449cd6a61c99"/>
    <dc:title>Comparison of Simulated and Measured Calcium Sparks in Intact Skeletal Muscle Fibers of the Frog</dc:title>
    <bqs:volume>120</bqs:volume>
    <bqs:first_page>349</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#f65d519b-6834-467a-b5c5-8d7bb94ebc3e"/>
    <dcterms:issued rdf:resource="rdf:#c2a2a036-998d-4840-8ede-06972eddcde9"/>
    <bqs:last_page>368</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e2020bf4-d55e-4762-8ecc-82f5daae8a60">
    <dc:creator rdf:resource="rdf:#67554e05-d816-4d98-b600-354bb0bfda51"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6168a10a-5755-4605-88f7-6eb9553637ff">
    <dcterms:modified rdf:resource="rdf:#0bddf72c-7b4b-43d8-b33c-da7f68b29552"/>
    <rdf:value>The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics.  This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology.&#13;
&#13;
The model runs in the PCEnv simulator but gives a flat/almost flat output.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#f2da944a-093f-4012-9446-f23fefb15433"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#dec470f4-829c-4c76-b16b-6a981312e125">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c2a2a036-998d-4840-8ede-06972eddcde9">
    <dcterms:W3CDTF>2002-09-01</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#34d95429-bc10-4e86-8ced-721c940f4df0">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#fcfd6565-5376-43d5-83fb-6c6ae6886816"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6e9d66bf-d5c1-42da-8353-c57d4b947203">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#82073aea-be4e-4d25-824d-2707e180a175">
    <dcterms:W3CDTF>2009-05-05T12:11:16+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#67554e05-d816-4d98-b600-354bb0bfda51">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fdef2ae0-5450-430d-b7e3-3294de0dbbbf">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#681b32d0-9b5d-4221-8bb4-3de67ac7afeb">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c2bc9ff3-7d71-4859-9016-60dd9fafd3e9">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f2da944a-093f-4012-9446-f23fefb15433">
    <vCard:N rdf:resource="rdf:#6529fe9e-1b39-4a17-b967-e5ddc8e8a9ff"/>
  </rdf:Description>
</rdf:RDF>
</model>