<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  chay_model_1995.xml

CREATED :  18th May 2007

LAST MODIFIED : 18th May 2007

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.

DESCRIPTION :  This file contains a CellML description of Chay et al's
1995 mathematical model of intracellular calcium spikes in non-excitable cells.

CHANGES:  
 
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="chay_model_1995_version02" name="chay_model_1995_version02">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Intracellular Ca2+ Spikes in Non-excitable Cell Models</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>

    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
This model produces an oscillating output but this result has not been checked against the publication.</para>

<para>
ValidateCellML verifies this model as valid CellML, but detects some unit inconsistencies.
</para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
Intracellular Ca<superscript>2+</superscript> ions are essential for the initiation of cellular events such as the fertilisation of eggs, muscle contraction and hormone and peptide secretion.  In excitable cells such as neurons, an increase in intracellular Ca<superscript>2+</superscript> is brought about by the Ca<superscript>2+</superscript> channels in the plasma membrane when these channels open during depolarisation, permitting extracellular Ca<superscript>2+</superscript> to enter the cell.  By contrast, in non-excitable cells Ca<superscript>2+</superscript> is supplied mainly by internal stores.  These stores release Ca<superscript>2+</superscript> when neurotransmitters and hormones engage in the phospholinositide signalling pathway.

</para>

<para>
Oscillatory signals in [Ca<superscript>2+</superscript>]<subscript>i</subscript> in non-excitable cells are frequency encoded.  These patterns are similar to action potential responses observed in excitable cells upon stimulation.  A model exclusively studied in this paper is based on the receptor-operated model of Cuthberson and Chay (1991) (see <xref linkend="fig_schematic_diagram"/> below).  The essence of this model is that the resting period between the Ca<superscript>2+</superscript> spikes are timed by the build up of GTP-binding proteins combined with positive feedback effects and co-operation, leading to the sudden activation of phospholipase C (PLC).  Activated PLC converts phosphatidylinositol 4,5-bisphosphate (PIP<subscript>2</subscript>) into two second messengers, diacylglycerol (DAG) and inositol 1,4,5-triphosphate (IP<subscript>3</subscript>), which releases Ca<superscript>2+</superscript> from intracellular stores (see <xref linkend="fig_signaling_pathway"/> below).

</para>

<para>
The complete original paper reference is cited below:
</para>

<para>
Appearance of phase-locked wenckebach-like rhythms, devil's staircase and universality in intracellular calcium spikes in non-excitable cell models, Teresa Ree Chay, Young Seek Lee and Yin Shui Fan, 1995, 
            <emphasis>Journal Of Theoretical Biology</emphasis>
         , 174, 21-44.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=7643604&amp;dopt=Abstract">PubMed ID: 7643604</ulink> 

</para>

<para>
The raw CellML description of the intracellular Ca<superscript>2+</superscript> spikes in non-excitable cells model can be downloaded in various formats as described in <xref linkend="sec_download_this_model"/>.
</para>

<informalfigure float="0" id="fig_schematic_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>A schematic diagram of the G-protein pathway</title>

    </objectinfo>
    <imagedata fileref="chay_1995a.png"/>
  </imageobject>
</mediaobject>
<caption>A schematic diagram of the Bourne-Stryer mechanism, PLC acts as a protein activating G-alpha-GTP.  PLC is an effector which is activated when bound to G-alpha-GTP.  The exchange of GTP for bound GDP is catalysed by the hormone-receptor complex R*, with the help of the G-beta-gamma subunit.  Hydrolysis of the bound GTP brings the G-protein back to the inactive state.  GTP hydrolysis by the G-alpha_GTP complexed with PLC is much faster than that of G-alpha-GTP alone.  The model is based on these four reaction steps.</caption>
</informalfigure>

<informalfigure float="0" id="fig_signaling_pathway">
<mediaobject>
  <imageobject>
    <objectinfo>

      <title>A diagram of the G-protein signaling pathway</title>
    </objectinfo>
    <imagedata fileref="chay_1995b.png"/>
  </imageobject>
</mediaobject>
<caption>The Ca<superscript>2+</superscript>-phosphatidylinositol signalling pathway plays a major role in transmembrane signalling in a large number of different cell types.  In this pathway hormonal stimuli lead to the activation of G-proteins as an effector system.  This initiates PLC activation and the subsequent formation of DAG and IP<subscript>3</subscript> which triggers the generation of repetitive [Ca<superscript>2+</superscript>]<subscript>i</subscript> spikes varying in frequency, amplitude and duration depending on the strength and the type of the extracellular agonist.</caption>

</informalfigure>

</sect1>
</article>
</documentation>
 
  <!--
    Below, we define some additional units for association with variables and
    constants within the model. The identifiers are fairly self-explanatory.
  -->
  
  <units name="nanomolar">
    <unit units="mole" prefix="nano"/>
    <unit units="litre" exponent="-1"/>
  </units>
  
  <units name="fifth_order_rate_constant">
    <unit units="nanomolar" exponent="-4"/>
    <unit units="second" exponent="-1"/>
  </units>
  
  <units name="first_order_rate_constant">
    <unit units="second" exponent="-1"/>
  </units>
  
  <units name="second_order_rate_constant">
    <unit units="nanomolar" exponent="-1"/>
    <unit units="second" exponent="-1"/>
  </units>
  
  <!--
    The "environment" component is used to declare variables that are used by
    all or most of the other components, in this case just "time".
  -->
  
  <component name="environment">
    <variable units="second" public_interface="out" name="time"/>
  </component>
  
  <!--
    The following components describe all the reactants and products involved in
    reactions. 
  -->
  
  <component name="G_alpha_GTP">
    <variable units="nanomolar" public_interface="out" name="G_alpha_GTP"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kp"/>
    <variable units="nanomolar" public_interface="out" name="KD" initial_value="25.0"/>
    
    <variable units="first_order_rate_constant" name="kg" initial_value="0.005"/>
    <variable units="fifth_order_rate_constant" name="kp_" initial_value="2.0E-7"/>
    <variable units="first_order_rate_constant" name="hg" initial_value="0.0"/>
    
    <variable units="nanomolar" public_interface="in" name="PLC"/>
    <variable units="nanomolar" public_interface="in" name="DAG"/>
    <variable units="nanomolar" public_interface="in" name="G_alpha_GDP"/>
    <variable units="second" public_interface="in" name="time"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/>
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>G_alpha_GTP</ci> 
        </apply> 
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>kg</ci>
            <ci>G_alpha_GDP</ci>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> 4.0 </cn>
              <ci>kp</ci>
              <apply>
                <power/>
                <ci>G_alpha_GTP</ci>
                <cn cellml:units="dimensionless"> 4.0 </cn>
              </apply>
              <ci>PLC</ci>
            </apply>
            <apply>
              <times/>
              <ci>hg</ci>
              <ci>G_alpha_GTP</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="kp_calculation">
        <eq/>
        <ci> kp </ci>
        <apply>
          <times/>
          <ci> kp_ </ci>
          <apply>
            <divide/>
            <apply>
              <power/>
              <ci> DAG </ci>
              <cn cellml:units="dimensionless"> 2.0 </cn>
            </apply>
            <apply>
              <plus/>
              <apply>
                <power/>
                <ci> KD </ci>
                <cn cellml:units="dimensionless"> 2.0 </cn>
              </apply>
              <apply>
                <power/>
                <ci> DAG </ci>
                <cn cellml:units="dimensionless"> 2.0 </cn>
              </apply>
            </apply> 
          </apply>
        </apply>
      </apply> 
    </math>
  </component>

  <component name="DAG">
    <variable units="nanomolar" public_interface="out" name="DAG"/>
    
    <variable units="first_order_rate_constant" name="kd"/>
    <variable units="first_order_rate_constant" name="kd_" initial_value="700.0"/>
    <variable units="first_order_rate_constant" name="hd" initial_value="100.0"/>
    <variable units="second_order_rate_constant" name="ld" initial_value="250.0"/>
    
    <variable units="nanomolar" public_interface="in" name="KD"/>
    <variable units="nanomolar" public_interface="in" name="PLC_active"/>
    <variable units="second" public_interface="in" name="time"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply id="DAG_diff_eq">
        <eq/>
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>DAG</ci> 
        </apply> 
        <apply>
          <plus/>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>kd</ci>
              <ci>PLC_active</ci>
            </apply>
            <apply>
              <times/>
              <ci>hd</ci>
              <ci>DAG</ci>
            </apply>
          </apply>
          <ci> ld </ci>
        </apply>
      </apply>
      
      <apply id="kd_calculation">
        <eq/>
        <ci> kd </ci>
        <apply>
          <times/>
          <ci> kd_ </ci>
          <apply>
            <divide/>
            <apply>
              <power/>
              <ci> DAG </ci>
              <cn cellml:units="dimensionless"> 2.0 </cn>
            </apply>
            <apply>
              <plus/>
              <apply>
                <power/>
                <ci> KD </ci>
                <cn cellml:units="dimensionless"> 2.0 </cn>
              </apply>
              <apply>
                <power/>
                <ci> DAG </ci>
                <cn cellml:units="dimensionless"> 2.0 </cn>
              </apply>
            </apply> 
          </apply>
        </apply>
      </apply> 
    </math>
  </component>

  <component name="Ca_i">
    <variable units="nanomolar" name="Ca_i"/>
    <variable units="second_order_rate_constant" name="rho_kc" initial_value="90000.0"/>
    <variable units="first_order_rate_constant" name="rho_hc" initial_value="1.0"/>
    <variable units="second_order_rate_constant" name="rho_lc" initial_value="200.0"/>
    <variable units="nanomolar" name="IP3"/>
    <variable units="nanomolar" name="Ks" initial_value="300.0"/>
    
    <variable units="nanomolar" public_interface="in" name="DAG"/>
    <variable units="second" public_interface="in" name="time"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply id="Ca_i_diff_eq">
        <eq/>
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>Ca_i</ci> 
        </apply>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci> rho_kc </ci>
              <apply>
                <divide/>
                <apply>
                  <power/>
                  <ci> IP3 </ci>
                  <cn cellml:units="dimensionless"> 3.0 </cn>
                </apply>
                <apply>
                  <plus/>
                  <apply>
                    <power/>
                    <ci> Ks </ci>
                    <cn cellml:units="dimensionless"> 3.0 </cn>
                  </apply>
                  <apply>
                    <power/>
                    <ci> IP3 </ci>
                    <cn cellml:units="dimensionless"> 3.0 </cn>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>rho_hc</ci>
              <ci>Ca_i</ci>
            </apply>
          </apply>
          <ci> rho_lc </ci>
        </apply>
      </apply>
     
      <apply>
        <eq/>
        <ci> IP3 </ci>
        <ci> DAG </ci>
      </apply>
    </math>
  </component>

  <component name="PLC_active">
    <variable units="nanomolar" public_interface="out" name="PLC_active"/>
    
    <variable units="first_order_rate_constant" name="hp"/>
    <variable units="first_order_rate_constant" name="hp_" initial_value="0.5"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="kp"/>
    <variable units="nanomolar" public_interface="in" name="KD"/>
    <variable units="nanomolar" public_interface="in" name="G_alpha_GTP"/>
    <variable units="nanomolar" public_interface="in" name="PLC"/>
    <variable units="nanomolar" public_interface="in" name="DAG"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/>
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>PLC_active</ci> 
        </apply> 
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>kp</ci>
            <apply>
              <power/>
              <ci>G_alpha_GTP</ci>
              <cn cellml:units="dimensionless"> 4.0 </cn>
            </apply>
            <ci>PLC</ci>
          </apply>
          <apply>
            <times/>
            <ci>hp</ci>
            <ci>PLC_active</ci>
          </apply>
        </apply>
      </apply>
      
      <apply id="hp_calculation">
        <eq/>
        <ci> hp </ci>
        <apply>
          <times/>
          <ci> hp_ </ci>
          <apply>
            <divide/>
            <apply>
              <power/>
              <ci> DAG </ci>
              <cn cellml:units="dimensionless"> 2.0 </cn>
            </apply>
            <apply>
              <plus/>
              <apply>
                <power/>
                <ci> KD </ci>
                <cn cellml:units="dimensionless"> 2.0 </cn>
              </apply>
              <apply>
                <power/>
                <ci> DAG </ci>
                <cn cellml:units="dimensionless"> 2.0 </cn>
              </apply>
            </apply> 
          </apply>
        </apply>
      </apply> 
    </math>
  </component>

  <component name="PLC">
    <variable units="nanomolar" public_interface="out" name="PLC"/>
    
    <variable units="nanomolar" name="PLC_total" initial_value="10.0"/>
    
    <variable units="nanomolar" public_interface="in" name="PLC_active"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/>
        <ci>PLC</ci> 
        <apply>
          <minus/>
          <ci>PLC_total</ci>
          <ci>PLC_active</ci>
        </apply>
      </apply>
    </math>
  </component>

  <component name="G_alpha_GDP">
    <variable units="nanomolar" public_interface="out" name="G_alpha_GDP"/>
    
    <variable units="nanomolar" name="G_total" initial_value="200.0"/>
    
    <variable units="nanomolar" public_interface="in" name="G_alpha_GTP"/>
    <variable units="nanomolar" public_interface="in" name="PLC_active"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/>
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>G_alpha_GDP</ci> 
        </apply> 
        <apply>
          <minus/>
          <ci>G_total</ci>
          <apply>
            <plus/>
            <ci>G_alpha_GTP</ci>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> 4.0 </cn>
              <ci>PLC_active</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  
  
  <connection>
    <map_components component_2="environment" component_1="G_alpha_GTP"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="G_alpha_GDP"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="PLC_active"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="DAG"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Ca_i"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="G_alpha_GDP" component_1="G_alpha_GTP"/>
    <map_variables variable_2="G_alpha_GTP" variable_1="G_alpha_GTP"/>
    <map_variables variable_2="G_alpha_GDP" variable_1="G_alpha_GDP"/>
  </connection>

  <connection>
    <map_components component_2="PLC" component_1="G_alpha_GTP"/>
    <map_variables variable_2="PLC" variable_1="PLC"/>
  </connection>
  
  <connection>
    <map_components component_2="DAG" component_1="G_alpha_GTP"/>
    <map_variables variable_2="DAG" variable_1="DAG"/>
    <map_variables variable_2="KD" variable_1="KD"/>
  </connection>

  <connection>
    <map_components component_2="DAG" component_1="Ca_i"/>
    <map_variables variable_2="DAG" variable_1="DAG"/>
  </connection>
  
  <connection>
    <map_components component_2="DAG" component_1="PLC_active"/>
    <map_variables variable_2="PLC_active" variable_1="PLC_active"/>
    <map_variables variable_2="DAG" variable_1="DAG"/>
  </connection>
  
  <connection>
    <map_components component_2="G_alpha_GTP" component_1="PLC_active"/>
    <map_variables variable_2="kp" variable_1="kp"/>
    <map_variables variable_2="KD" variable_1="KD"/>
    <map_variables variable_2="G_alpha_GTP" variable_1="G_alpha_GTP"/>
  </connection>
  
  <connection>
    <map_components component_2="PLC" component_1="PLC_active"/>
    <map_variables variable_2="PLC" variable_1="PLC"/>
    <map_variables variable_2="PLC_active" variable_1="PLC_active"/>
  </connection>
  
  <connection>
    <map_components component_2="G_alpha_GDP" component_1="PLC_active"/>
    <map_variables variable_2="PLC_active" variable_1="PLC_active"/>
  </connection>
  


<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#5114c4f7-ed87-4ab0-ac17-61eeb3c479ea">
    <rdf:li rdf:resource="rdf:#c0a1f7b4-8819-4892-a96d-f8341f30817a"/>
    <rdf:li rdf:resource="rdf:#3af1241d-9dd1-4b3e-bb78-adede2df744d"/>
    <rdf:li rdf:resource="rdf:#324cef14-0380-41ba-85c7-be5e6f863daf"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#0e8842c0-bf08-4104-9f00-e987ce7482fd">
    <dcterms:W3CDTF>1995-05-07</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher>The University of Auckland, Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#5cfbdb54-8e03-4306-bfb7-ec3d28554b61"/>
    <dcterms:created rdf:resource="rdf:#263e7f3e-c1fb-40b7-b94c-e79a2caaa68d"/>
    <dc:creator rdf:resource="rdf:#19f655eb-7973-4a8c-9be9-97265e5795e3"/>
    <cmeta:modification rdf:resource="rdf:#7d822ac6-cf33-481c-8608-d09dd9458116"/>
    <cmeta:modification rdf:resource="rdf:#0d6c6d68-35eb-47b2-bdfd-36c78393ff14"/>
    <cmeta:modification rdf:resource="rdf:#9d4cec15-9de6-4b8d-adc8-061c0e4b56b1"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6c7b5ddb-9911-4882-810b-1b3c61ca73cd">
    <dc:subject rdf:resource="rdf:#55f7ea57-9ec6-4abf-9aa2-8b9b9b08c6c3"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0b4f26b7-a859-4f92-9a16-aa3a56220d7e">
    <dcterms:W3CDTF>2009-05-29T15:06:35+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fb072cd9-6083-4a61-ab5c-e7658fbb3f92">
    <vCard:N rdf:resource="rdf:#85113810-879a-4587-864b-e5033ad30b1b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1a052c26-b4e2-4ceb-a2e4-bae7e4c1d269">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#19f655eb-7973-4a8c-9be9-97265e5795e3">
    <vCard:ORG rdf:resource="rdf:#dc88dd16-dcd8-4005-8230-4dc1559dbc06"/>
    <vCard:EMAIL rdf:resource="rdf:#222b2be7-ce52-4778-bc5e-d2823d6451cf"/>
    <vCard:N rdf:resource="rdf:#bb06fdc4-6f0c-42a8-a884-f29780dea8e4"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0d277a69-b75b-433a-9f4a-159ed6d16225">
    <bqs:Pubmed_id>7643604</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#4e8a18a0-6836-4efd-a9d9-c41dd3a82ecb"/>
  </rdf:Description>
  <rdf:Description rdf:about="#chay_model_1995_version02">
    <dc:title>
        The Chay et al 1995 mathematical model of intracellular calcium spikes 
        in non-excitable cells.
      </dc:title>
    <cmeta:bio_entity>non-excitable cell</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#97fce5fb-2973-4fc7-ae7f-eac2727a3e9f"/>
    <bqs:reference rdf:resource="rdf:#0d277a69-b75b-433a-9f4a-159ed6d16225"/>
    <bqs:reference rdf:resource="rdf:#6c7b5ddb-9911-4882-810b-1b3c61ca73cd"/>
<bqs:reference rdf:parseType="Resource">
  <dc:subject rdf:parseType="Resource">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value>
      <rdf:Bag>
        <rdf:li>calcium dynamics</rdf:li>
        <rdf:li>wenchbach</rdf:li>
        <rdf:li>electrophysiology</rdf:li>
      </rdf:Bag>
    </rdf:value>
  </dc:subject>
</bqs:reference>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#458768f5-bc1f-41d6-b704-73989e63b87a">
    <vCard:Given>Young</vCard:Given>
    <vCard:Family>Lee</vCard:Family>
    <vCard:Other>Seek</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#55f7ea57-9ec6-4abf-9aa2-8b9b9b08c6c3">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value>calcium dynamics</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4e8a18a0-6836-4efd-a9d9-c41dd3a82ecb">
    <dc:creator rdf:resource="rdf:#5114c4f7-ed87-4ab0-ac17-61eeb3c479ea"/>
    <dc:title>Appearance of Phase-locked Wenchbach-like Rhythms, Devil's Staircase and Universality in Intracellular Calcium Spikes in Non-excitable Cell Models</dc:title>
    <bqs:volume>174</bqs:volume>
    <bqs:first_page>21</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#5931e9fc-4950-4798-8021-67a5bcc6d451"/>
    <dcterms:issued rdf:resource="rdf:#0e8842c0-bf08-4104-9f00-e987ce7482fd"/>
    <bqs:last_page>44</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7d822ac6-cf33-481c-8608-d09dd9458116">
    <dcterms:modified rdf:resource="rdf:#0b4f26b7-a859-4f92-9a16-aa3a56220d7e"/>
    <rdf:value>updated curation status, removed reference link in documentation</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#6d852238-6f1b-4da9-b10c-efa75b0f9014"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5931e9fc-4950-4798-8021-67a5bcc6d451">
    <dc:title>Journal of Theoretical Biology</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a786210d-5c34-413b-a612-eb805f32a0e5">
    <vCard:Given>Yin</vCard:Given>
    <vCard:Family>Fan</vCard:Family>
    <vCard:Other>Shui</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#41a58000-db23-4cd8-b240-8ac2195ec503">
    <vCard:Given>Teresa</vCard:Given>
    <vCard:Family>Chay</vCard:Family>
    <vCard:Other>Ree</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#20557fdb-45ec-43dd-b274-2d2b64db1389">
    <dcterms:W3CDTF>2009-05-29T15:06:35+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#97fce5fb-2973-4fc7-ae7f-eac2727a3e9f">
    <dc:creator rdf:resource="rdf:#1a052c26-b4e2-4ceb-a2e4-bae7e4c1d269"/>
    <rdf:value>This is the CellML description of Chay et al's 1995 mathematical model of intracellular calcium spikes in non-excitable cells.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#85113810-879a-4587-864b-e5033ad30b1b">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#dc88dd16-dcd8-4005-8230-4dc1559dbc06">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2a6f79e7-3257-4fc0-a925-4763bb9323b5">
    <vCard:N rdf:resource="rdf:#0e7d8d45-0b33-4a5f-880b-db9dca847db0"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0d6c6d68-35eb-47b2-bdfd-36c78393ff14">
    <dcterms:modified rdf:resource="rdf:#20557fdb-45ec-43dd-b274-2d2b64db1389"/>
    <rdf:value>updated curation status, removed reference link in documentation</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#2a6f79e7-3257-4fc0-a925-4763bb9323b5"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bb06fdc4-6f0c-42a8-a884-f29780dea8e4">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6824491d-7d07-419e-9ec4-e28dc6aa3950">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#222b2be7-ce52-4778-bc5e-d2823d6451cf">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#324cef14-0380-41ba-85c7-be5e6f863daf">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#a786210d-5c34-413b-a612-eb805f32a0e5"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#263e7f3e-c1fb-40b7-b94c-e79a2caaa68d">
    <dcterms:W3CDTF>2007-05-18T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6d852238-6f1b-4da9-b10c-efa75b0f9014">
    <vCard:N rdf:resource="rdf:#51afea28-7e4f-4c82-9326-3e2665b5c05e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4298c2d3-dc33-4533-b813-1b03f16230ec">
    <dcterms:W3CDTF>2007-06-05T09:21:48+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c0a1f7b4-8819-4892-a96d-f8341f30817a">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#41a58000-db23-4cd8-b240-8ac2195ec503"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#51afea28-7e4f-4c82-9326-3e2665b5c05e">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9d4cec15-9de6-4b8d-adc8-061c0e4b56b1">
    <dcterms:modified rdf:resource="rdf:#4298c2d3-dc33-4533-b813-1b03f16230ec"/>
    <rdf:value>The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics.  This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology.&#13;
&#13;
The model runs in the PCEnv simulator and gives a nice curved output.  However it does not provide the spiked output which has been published in the original paper.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#fb072cd9-6083-4a61-ab5c-e7658fbb3f92"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3af1241d-9dd1-4b3e-bb78-adede2df744d">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#458768f5-bc1f-41d6-b704-73989e63b87a"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5cfbdb54-8e03-4306-bfb7-ec3d28554b61">
    <dc:creator rdf:resource="rdf:#6824491d-7d07-419e-9ec4-e28dc6aa3950"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0e7d8d45-0b33-4a5f-880b-db9dca847db0">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
</rdf:RDF>
</model>
