// This CellML file was generated on 14.09.2009 at 23:59:21 using:
//
// COR (0.9.31.1319)
// Copyright 2002-2009 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// title: Time is expressed in seconds, calcium variables and parameters are expressed in absolute values.
// comment: FN Geoff Nunns; This model runs in PCEnv, but does not recreate the published results. Units are consistent throughout.
// created: W3CDTF 2008-07-17T00:00:00+12:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; gnunns1@jhem.jhu.edu; Given Geoffrey; Family Nunns; Other Rogan
// modification: Extensively edited the model such that it now runs correctly to reproduce the published results; Family Solovyova; Given Olga; o.solovyova@iip.uran.ru; W3CDTF 2009-09-28
// reference: subject_type keyword; cardiac; electrophysiology; viscosity; calcium dynamics
// reference: Pubmed_id 15302547; Given Leonid; Family Katsnelson; Other B; Given Larissa; Family Nikitina; Other V; Given Denis; Family Chemla; Given Olga; Family Solovyova; Given Catherine; Family Coirault; Given Yves; Family Lecarpentier; Given Vladimir; Family Markhasin; Other S; title Influence of viscosity on myocardium mechanical activity: a mathematical model; volume 230; first_page 385; title Journal of Theoretical Biology; W3CDTF 2004-00-00 00:00; last_page 405
// comment: FN Geoff Nunns; This model runs in PCEnv, but does not recreate the published results. Units are consistent throughout.
def model katsnelson_2004 as
  // Influence of viscosity on myocardium mechanical activity: a mathematical model
  //
  // Geoffrey Nunns
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This model has been checked and it runs in both COR and PCEnv to recreate the published results. Units are consistent throughout. In this particular version of the model, time is expressed in seconds and all calcium variables and parameters are in absolute values.
  //
  // With default setting the model produce isometric contraction (parameter isotonic=0). To switch from isomentric mode to isotonic mode isotonic parameter should be set 1. Then set parameter F_afterload to the value less then the maximum force calculated at isometric mode. Make sure that the model is run in isometric mode first and see the value of the maximum of isometric force. If F_afterload is not less than this value, model performs isometric mode instead of isotonic.
  //
  // Model Structure
  //
  // Abstract: We have previously proposed and validated a mathematical model of myocardium contraction-relaxation cycle based on current knowledge of regulatory role of Ca2+ and cross-bridge kinetics in cardiac cell. That model did not include viscous elements. Here we propose a modification of the model, in which two viscous elements are added, one in parallel to the contractile element, and one more in parallel to the series elastic element. The modified model allowed us to simulate and explain some subtle experimental data on relaxation velocity in isotonic twitches and on a mismatch between the time course of sarcomere shortening/lengthening and the time course of active force generation in isometric twitches. Model results were compared with experimental data obtained from 28 rat LV papillary muscles contracting and relaxing against various loads. Additional model analysis suggested contribution of viscosity to main inotropic and lusitropic characteristics of myocardium performance.
  //
  // model diagram
  //
  // Schematic diagram of the Katsnelson et al model - an updated rheological scheme of the heart muscle including contractile element CE, two passive elastic elements PE (parallel one) and SE (series one) and two viscous elements VS1 and VS2. The effect of calcium and the calcium binding ligand (B) in facilitating actin-myosin binding is also highlighted.
  //
  // The original paper reference is cited below:
  //
  // Influence of viscosity on myocardium mechanical activity: a mathematical model, Leonid B. Katsnelson, Larissa V. Nikitina, Denis Chemla, Olga Solovyova, Catherine Coirault, Yves Lecarpentier and Vladimir S. Markhasin, 2004, Journal of Theoretical Biology, 230, 385-485. PubMed ID: 15302547 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=15302547&dopt=Abstract)
  // The Modification History metadata. This lists the changes that have been
  // made to the document, who made the changes, and when they were made.
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit per_second2 as
    unit second {expo: -2};
  enddef;
  def unit micrometre as
    unit meter {pref: micro};
  enddef;
  def unit micrometre_per_second as
    unit micrometre;
    unit per_second;
  enddef;
  def unit micrometre_per_second2 as
    unit micrometre;
    unit per_second2;
  enddef;
  def unit per_micrometre as
    unit micrometre {expo: -1};
  enddef;
  def unit second_per_micrometre as
    unit second;
    unit per_micrometre;
  enddef;
  def unit millinewton as
    unit newton {pref: milli};
  enddef;
  def unit millinewton_per_second as
    unit millinewton;
    unit per_second;
  enddef;
  def unit millinewton_second_per_micrometre as
    unit millinewton;
    unit second_per_micrometre;
  enddef;
  def unit micromole as
    unit mole {pref: micro};
  enddef;
  def unit micromole_per_second as
    unit micromole;
    unit per_second;
  enddef;
  def unit per_micromole as
    unit micromole {expo: -1};
  enddef;
  def unit per_second_micromole as
    unit per_second;
    unit per_micromole;
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp parameters as
    var isotonic: dimensionless {init: 0, pub: out};
    var alpha_1: per_micrometre {init: 19, pub: out};
    var beta_1: millinewton {init: 0.29, pub: out};
    var alpha_2: per_micrometre {init: 14.6, pub: out};
    var beta_2: millinewton {init: 0.000924, pub: out};
    var alpha_3: per_micrometre {init: 48, pub: out};
    var beta_3: millinewton {init: 0.01, pub: out};
    var lambda: millinewton {init: 96, pub: out};
    var A_half: micromole {init: 42, pub: out};
    var mu: dimensionless {init: 3, pub: out};
    var chi: dimensionless {init: 0.705, pub: out};
    var chi_0: dimensionless {init: 3, pub: out};
    var m_0: dimensionless {init: 0.9, pub: out};
    var v_max: micrometre_per_second {init: 5.6, pub: out};
    var a: dimensionless {init: 0.25, pub: out};
    var d_h: dimensionless {init: 0.5, pub: out};
    var alpha_P: dimensionless {init: 4, pub: out};
  enddef;

  def comp isotonic as
    var time: second {pub: in};
    var isotonic: dimensionless {pub: in};
    var l: micrometre {pub: in};
    var F_muscle: millinewton {pub: in};
    var flag: dimensionless;
    var F_afterload: millinewton {init: 2};
    var isotonic_mode: dimensionless {pub: out};
    var l_0: micrometre {init: 0.527};
    flag = sel
      case (l >= l_0) and (time < 0.15{second}):
        0{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    isotonic_mode = sel
      case isotonic == 0{dimensionless}:
        0{dimensionless};
      case (isotonic == 1{dimensionless}) and (F_muscle >= F_afterload):
        1{dimensionless};
      case (isotonic == 1{dimensionless}) and (l >= l_0) and (flag == 1{dimensionless}):
        0{dimensionless};
    endsel;
  enddef;

  def comp parameters_izakov_et_al_1991 as
    var S_0: micrometre {init: 1.14, pub: out};
    var q_v: per_second {pub: out};
    var q_1: per_second {init: 17.3};
    var q_2: per_second {init: 259};
    var q_3: per_second {init: 17.3};
    var q_4: per_second {init: 15, pub: out};
    var v_star: micrometre_per_second {init: 5.3035675, pub: out};
    var v_1: micrometre_per_second {pub: out};
    var alpha_G: dimensionless {init: 1, pub: out};
    var a_on: per_second_micromole {init: 32.85, pub: out};
    var a_off: per_second {init: 290, pub: out};
    var k_A: per_micromole {init: 0.04, pub: out};
    var v: micrometre_per_second {pub: in};
    var v_max: micrometre_per_second {pub: in};
    var alpha_Q: dimensionless {init: 10};
    var beta_Q: dimensionless {init: 5000};
    q_v = sel
      case v <= 0{micrometre_per_second}:
        q_1-q_2*v/v_max;
      case (v <= v_star) and (0{micrometre_per_second} < v):
        (q_4-q_3)*v/v_star+q_3;
      otherwise:
        q_4/pow(1{dimensionless}+beta_Q*(v-v_star)/v_max, alpha_Q);
    endsel;
    v_1 = v_max/10{dimensionless};
  enddef;

  def comp force as
    var F_CE: millinewton;
    var F_muscle: millinewton {pub: out};
    var F_XSE: millinewton;
    var F_SE: millinewton;
    var F_PE: millinewton;
    var N: dimensionless {pub: in};
    var k_P_vis: millinewton_second_per_micrometre {pub: in};
    var k_S_vis: millinewton_second_per_micrometre {pub: in};
    var w: micrometre_per_second {pub: in};
    var v: micrometre_per_second {pub: in};
    var l_1: micrometre {pub: in};
    var l_2: micrometre {pub: in};
    var l_3: micrometre {pub: in};
    var p_v: dimensionless {pub: in};
    var alpha_1: per_micrometre {pub: in};
    var beta_1: millinewton {pub: in};
    var alpha_2: per_micrometre {pub: in};
    var beta_2: millinewton {pub: in};
    var alpha_3: per_micrometre {pub: in};
    var beta_3: millinewton {pub: in};
    var lambda: millinewton {pub: in};
    F_CE = lambda*p_v*N;
    F_muscle = F_XSE;
    F_SE = beta_1*(exp(alpha_1*(l_2-l_1))-1{dimensionless});
    F_PE = beta_2*(exp(alpha_2*l_2)-1{dimensionless});
    F_XSE = beta_3*(exp(alpha_3*l_3)-1{dimensionless});
  enddef;

  def comp crossbridge_kinetics as
    var N: dimensionless {init: 0.0001, pub: out};
    var K_chi: per_second {pub: out};
    var M_A: dimensionless;
    var n_1: dimensionless;
    var L_oz: dimensionless {pub: out};
    var k_p_v: per_second;
    var k_m_v: per_second;
    var time: second {pub: in};
    var A: micromole {pub: in};
    var l_1: micrometre {pub: in};
    var A_half: micromole {pub: in};
    var mu: dimensionless {pub: in};
    var chi: dimensionless {pub: in};
    var chi_0: dimensionless {pub: in};
    var m_0: dimensionless {pub: in};
    var S_0: micrometre {pub: in};
    var q_v: per_second {pub: in};
    var v: micrometre_per_second {pub: in};
    var v_star: micrometre_per_second {pub: in};
    var G_star: dimensionless {pub: in};
    var P_star: dimensionless {pub: in};
    var q_4: per_second {pub: in};
    var v_0: micrometre_per_second {init: 560};
    var q_star: per_second {init: 1000};
    M_A = pow(A, mu)/(pow(A, mu)+pow(A_half, mu));
    n_1 = 0.6{per_micrometre}*l_1+0.5{dimensionless};
    L_oz = (l_1+S_0)/(0.46{micrometre}+S_0);
    k_p_v = chi*chi_0*q_v*m_0*G_star;
    k_m_v = sel
      case v <= v_star:
        chi_0*q_v*(1{dimensionless}-chi*m_0*G_star);
      otherwise:
        chi_0*(q_4*(1{dimensionless}-chi*m_0*G_star)+q_star*(v-v_star)/(v_0-v_star));
    endsel;
    K_chi = k_p_v*M_A*n_1*L_oz*(1{dimensionless}-N)-k_m_v*N;
    ode(N, time) = K_chi;
  enddef;

  def comp length as
    var dl_1_dt: micrometre_per_second {pub: out};
    var l_1: micrometre {init: 0.437, pub: out};
    var dl_2_dt: micrometre_per_second {pub: out};
    var l_2: micrometre {init: 0.439, pub: out};
    var dl_3_dt: micrometre_per_second {pub: out};
    var l_3: micrometre {init: 0.089, pub: out};
    var time: second {pub: in};
    var isotonic_mode: dimensionless {pub: in};
    var v: micrometre_per_second {pub: in};
    var w: micrometre_per_second {pub: in};
    var l: micrometre {pub: out};
    var k_S_vis: millinewton_second_per_micrometre {pub: in};
    var phi_chi_2: micrometre_per_second {pub: in};
    l = l_2+l_3;
    dl_1_dt = v;
    ode(l_1, time) = dl_1_dt;
    dl_2_dt = sel
      case k_S_vis == 0{millinewton_second_per_micrometre}:
        phi_chi_2;
      otherwise:
        w;
    endsel;
    ode(l_2, time) = dl_2_dt;
    dl_3_dt = sel
      case isotonic_mode == 1{dimensionless}:
        0{micrometre_per_second};
      case (isotonic_mode == 0{dimensionless}) and (k_S_vis == 0{millinewton_second_per_micrometre}):
        -phi_chi_2;
      otherwise:
        -w;
    endsel;
    ode(l_3, time) = dl_3_dt;
  enddef;

  def comp CE_velocity as
    var v: micrometre_per_second {init: 0, pub: out};
    var phi_chi: micrometre_per_second2 {pub: out};
    var phi_chi_2: micrometre_per_second {pub: out};
    var k_P_vis: millinewton_second_per_micrometre {pub: out};
    var k_S_vis: millinewton_second_per_micrometre {pub: in};
    var time: second {pub: in};
    var w: micrometre_per_second {pub: in};
    var K_chi: per_second {pub: in};
    var N: dimensionless {pub: in};
    var l_1: micrometre {pub: in};
    var dl_1_dt: micrometre_per_second {pub: in};
    var l_2: micrometre {pub: in};
    var l_3: micrometre {pub: in};
    var alpha_1: per_micrometre {pub: in};
    var beta_1: millinewton {pub: in};
    var alpha_2: per_micrometre {pub: in};
    var beta_2: millinewton {pub: in};
    var alpha_3: per_micrometre {pub: in};
    var beta_3: millinewton {pub: in};
    var lambda: millinewton {pub: in};
    var isotonic_mode: dimensionless {pub: in};
    var p_v: dimensionless {pub: in};
    var p_prime_v: second_per_micrometre {pub: in};
    var alpha_P_lengthening: per_micrometre {init: 16};
    var beta_P_lengthening: millinewton_second_per_micrometre {init: 0.0015};
    var alpha_P_shortening: per_micrometre {init: 16};
    var beta_P_shortening: millinewton_second_per_micrometre {init: 0.0015};
    var alp_p: per_micrometre;
    alp_p = sel
      case v <= 0{micrometre_per_second}:
        alpha_P_lengthening;
      otherwise:
        alpha_P_shortening;
    endsel;
    k_P_vis = sel
      case v <= 0{micrometre_per_second}:
        beta_P_lengthening*exp(alpha_P_lengthening*l_1);
      otherwise:
        beta_P_shortening*exp(alpha_P_shortening*l_1);
    endsel;
    phi_chi = sel
      case isotonic_mode == 1{dimensionless}:
        -(lambda*K_chi*p_v+alp_p*k_P_vis*sqr(v)+alpha_2*beta_2*exp(alpha_2*l_2)*w)/(lambda*N*p_prime_v+k_P_vis);
      otherwise:
        -(lambda*K_chi*p_v+alp_p*k_P_vis*sqr(v)+(alpha_2*beta_2*exp(alpha_2*l_2)+alpha_3*beta_3*exp(alpha_3*l_3))*w)/(lambda*N*p_prime_v+k_P_vis);
    endsel;
    phi_chi_2 = sel
      case isotonic_mode == 1{dimensionless}:
        alpha_1*beta_1*exp(alpha_1*(l_2-l_1))*v/(alpha_1*beta_1*exp(alpha_1*(l_2-l_1))+alpha_2*beta_2*exp(alpha_2*l_2));
      otherwise:
        alpha_1*beta_1*exp(alpha_1*(l_2-l_1))*v/(alpha_1*beta_1*exp(alpha_1*(l_2-l_1))+alpha_2*beta_2*exp(alpha_2*l_2)+alpha_3*beta_3*exp(alpha_3*l_3));
    endsel;
    ode(v, time) = sel
      case k_S_vis == 0{millinewton_second_per_micrometre}:
        (alpha_1*beta_1*exp(alpha_1*(l_2-l_1))*(phi_chi_2-v)-(lambda*K_chi*p_v+alp_p*k_P_vis*sqr(v)))/(lambda*N*p_prime_v+k_P_vis);
      otherwise:
        phi_chi;
    endsel;
  enddef;

  def comp PE_velocity as
    var w: micrometre_per_second {init: 0, pub: out};
    var k_S_vis: millinewton_second_per_micrometre {pub: out};
    var time: second {pub: in};
    var v: micrometre_per_second {pub: in};
    var phi_chi: micrometre_per_second2 {pub: in};
    var l_1: micrometre {pub: in};
    var dl_1_dt: micrometre_per_second {pub: in};
    var l_2: micrometre {pub: in};
    var dl_2_dt: micrometre_per_second {pub: in};
    var l_3: micrometre {pub: in};
    var alpha_1: per_micrometre {pub: in};
    var beta_1: millinewton {pub: in};
    var alpha_2: per_micrometre {pub: in};
    var beta_2: millinewton {pub: in};
    var alpha_3: per_micrometre {pub: in};
    var beta_3: millinewton {pub: in};
    var lambda: millinewton {pub: in};
    var isotonic_mode: dimensionless {pub: in};
    var alpha_S_lengthening: per_micrometre {init: 39};
    var beta_S_lengthening: millinewton_second_per_micrometre {init: 0.008};
    var alpha_S_shortening: per_micrometre {init: 46};
    var beta_S_shortening: millinewton_second_per_micrometre {init: 0.006};
    var alp_s: per_micrometre;
    alp_s = sel
      case w <= v:
        alpha_S_lengthening;
      otherwise:
        alpha_S_shortening;
    endsel;
    k_S_vis = sel
      case w <= v:
        beta_S_lengthening*exp(alpha_S_lengthening*(l_2-l_1));
      otherwise:
        beta_S_shortening*exp(alpha_S_shortening*(l_2-l_1));
    endsel;
    ode(w, time) = sel
      case isotonic_mode == 1{dimensionless}:
        (k_S_vis*(phi_chi-alp_s*sqr(w-v))-alpha_1*beta_1*exp(alpha_1*(l_2-l_1))*(w-v)-alpha_2*beta_2*exp(alpha_2*l_2)*w)/k_S_vis;
      otherwise:
        phi_chi-alp_s*sqr(w-v)-(alpha_1*beta_1*exp(alpha_1*(l_2-l_1))*(w-v)+(alpha_2*beta_2*exp(alpha_2*l_2)+alpha_3*beta_3*exp(alpha_3*l_3))*w)/k_S_vis;
    endsel;
  enddef;

  def comp average_crossbridge_force as
    var p_v: dimensionless {pub: out};
    var p_prime_v: second_per_micrometre {pub: out};
    var P_star: dimensionless {pub: out};
    var G_star: dimensionless {pub: out};
    var gamma: dimensionless;
    var case_1: second_per_micrometre;
    var case_2: second_per_micrometre;
    var case_3: second_per_micrometre;
    var case_4: second_per_micrometre;
    var v: micrometre_per_second {pub: in};
    var phi_chi: micrometre_per_second2 {pub: in};
    var v_1: micrometre_per_second {pub: in};
    var v_max: micrometre_per_second {pub: in};
    var a: dimensionless {pub: in};
    var d_h: dimensionless {pub: in};
    var alpha_G: dimensionless {pub: in};
    var alpha_P: dimensionless {pub: in};
    gamma = a*d_h*sqr(v_1/v_max)/(3{dimensionless}*a*d_h-(a+1{dimensionless})*v_1/v_max);
    P_star = sel
      case v <= 0{micrometre_per_second}:
        a*(1{dimensionless}+v/v_max)/(a-v/v_max);
      otherwise:
        1{dimensionless}+d_h-sqr(d_h)*a/(a*d_h/gamma*sqr(v/v_max)+(a+1{dimensionless})*v/v_max+a*d_h);
    endsel;
    G_star = sel
      case (-v_max <= v) and (v <= 0{micrometre_per_second}):
        1{dimensionless}+0.6{dimensionless}*v/v_max;
      case (0{micrometre_per_second} < v) and (v <= v_1):
        P_star/((0.4{dimensionless}*a+1{dimensionless})*v/(a*v_max)+1{dimensionless});
      otherwise:
        P_star*exp(-alpha_G*pow((v-v_1)/v_max, alpha_P))/((0.4{dimensionless}*a+1{dimensionless})*v/(a*v_max)+1{dimensionless});
    endsel;
    case_1 = a*(0.4{dimensionless}+0.4{dimensionless}*a)/(v_max*sqr((a+1{dimensionless})*0.4{dimensionless}));
    case_2 = a*1{dimensionless}*(1{dimensionless}+0.4{dimensionless}*a+1.2{dimensionless}*v/v_max+0.6{dimensionless}*sqr(v/v_max))/(v_max*sqr((a-v/v_max)*(1{dimensionless}+0.6{dimensionless}*v/v_max)));
    case_3 = (0.4{dimensionless}*a+1{dimensionless})/(a*v_max);
    case_4 = 1{dimensionless}/v_max*exp(-alpha_G*pow(v/v_max-v_1/v_max, alpha_P))*((0.4{dimensionless}*a+1{dimensionless})/a+alpha_G*alpha_P*(1{dimensionless}+(0.4{dimensionless}*a+1{dimensionless})*v/(a*v_max))*pow(v/v_max-v_1/v_max, alpha_P-1{dimensionless}));
    p_v = P_star/G_star;
    p_prime_v = sel
      case v <= -v_max:
        case_1;
      case (-v_max < v) and (v <= 0{micrometre_per_second}):
        case_2;
      case (0{micrometre_per_second} < v) and (v <= v_1):
        case_3;
      otherwise:
        case_4;
    endsel;
  enddef;

  def comp calcium_handling as
    var A: micromole {init: 0.7, pub: out};
    var dA_dt: micromole_per_second;
    var N_A: dimensionless;
    var pi_N_A: dimensionless;
    var B: micromole {init: 0, pub: out};
    var dB_dt: micromole_per_second;
    var Ca_C: micromole {init: 0, pub: out};
    var time: second {pub: in};
    var N: dimensionless {pub: in};
    var a_on: per_second_micromole {pub: in};
    var a_off: per_second {pub: in};
    var k_A: per_micromole {pub: in};
    var L_oz: dimensionless {pub: in};
    var A_tot: micromole {init: 70};
    var B_tot: micromole {init: 28};
    var b_on: per_second_micromole {init: 37.143};
    var b_off: per_second {init: 182};
    var a_c: per_second2 {init: 5200};
    var r_Ca: per_second {init: 650};
    var q_Ca: per_micromole {init: 0.714};
    var t_d: second {init: 0.033};
    var Ca_m: micromole {init: 2.1};
    N_A = A_tot*N/(L_oz*A);
    pi_N_A = sel
      case N_A >= 1{dimensionless}:
        1{dimensionless};
      otherwise:
        pow(0.02{dimensionless}, N_A);
    endsel;
    dA_dt = a_on*(A_tot-A)*Ca_C-a_off*exp(-k_A*A)*pi_N_A*A;
    ode(A, time) = dA_dt;
    dB_dt = b_on*(B_tot-B)*Ca_C-b_off*B;
    ode(B, time) = dB_dt;
    ode(Ca_C, time) = sel
      case time < t_d:
        4{dimensionless}*a_c*Ca_m*time*(1{dimensionless}-exp(-a_c*sqr(time)))*exp(-a_c*sqr(time));
      otherwise:
        -dA_dt-dB_dt-r_Ca*exp(-q_Ca*Ca_C)*Ca_C;
    endsel;
  enddef;
  def map between environment and isotonic for
    vars time and time;
  enddef;
  def map between parameters and isotonic for
    vars isotonic and isotonic;
  enddef;
  def map between force and isotonic for
    vars F_muscle and F_muscle;
  enddef;
  def map between length and isotonic for
    vars isotonic_mode and isotonic_mode;
    vars l and l;
  enddef;
  def map between PE_velocity and isotonic for
    vars isotonic_mode and isotonic_mode;
  enddef;
  def map between CE_velocity and isotonic for
    vars isotonic_mode and isotonic_mode;
  enddef;
  def map between environment and crossbridge_kinetics for
    vars time and time;
  enddef;
  def map between environment and length for
    vars time and time;
  enddef;
  def map between environment and CE_velocity for
    vars time and time;
  enddef;
  def map between environment and PE_velocity for
    vars time and time;
  enddef;
  def map between environment and calcium_handling for
    vars time and time;
  enddef;
  def map between parameters and parameters_izakov_et_al_1991 for
    vars v_max and v_max;
  enddef;
  def map between force and parameters for
    vars alpha_1 and alpha_1;
    vars beta_1 and beta_1;
    vars alpha_2 and alpha_2;
    vars beta_2 and beta_2;
    vars alpha_3 and alpha_3;
    vars beta_3 and beta_3;
    vars lambda and lambda;
  enddef;
  def map between force and crossbridge_kinetics for
    vars N and N;
  enddef;
  def map between force and length for
    vars l_1 and l_1;
    vars l_2 and l_2;
    vars l_3 and l_3;
  enddef;
  def map between force and CE_velocity for
    vars v and v;
    vars k_P_vis and k_P_vis;
  enddef;
  def map between force and PE_velocity for
    vars w and w;
    vars k_S_vis and k_S_vis;
  enddef;
  def map between force and average_crossbridge_force for
    vars p_v and p_v;
  enddef;
  def map between crossbridge_kinetics and parameters for
    vars A_half and A_half;
    vars mu and mu;
    vars chi and chi;
    vars chi_0 and chi_0;
    vars m_0 and m_0;
  enddef;
  def map between crossbridge_kinetics and calcium_handling for
    vars A and A;
    vars N and N;
    vars L_oz and L_oz;
  enddef;
  def map between crossbridge_kinetics and average_crossbridge_force for
    vars G_star and G_star;
    vars P_star and P_star;
  enddef;
  def map between crossbridge_kinetics and length for
    vars l_1 and l_1;
  enddef;
  def map between crossbridge_kinetics and CE_velocity for
    vars K_chi and K_chi;
    vars v and v;
    vars N and N;
  enddef;
  def map between crossbridge_kinetics and parameters_izakov_et_al_1991 for
    vars S_0 and S_0;
    vars q_v and q_v;
    vars v_star and v_star;
    vars q_4 and q_4;
  enddef;
  def map between length and CE_velocity for
    vars v and v;
    vars phi_chi_2 and phi_chi_2;
    vars dl_1_dt and dl_1_dt;
    vars l_1 and l_1;
    vars l_2 and l_2;
    vars l_3 and l_3;
  enddef;
  def map between length and PE_velocity for
    vars w and w;
    vars k_S_vis and k_S_vis;
    vars dl_1_dt and dl_1_dt;
    vars l_1 and l_1;
    vars dl_2_dt and dl_2_dt;
    vars l_2 and l_2;
    vars l_3 and l_3;
  enddef;
  def map between CE_velocity and parameters for
    vars alpha_1 and alpha_1;
    vars beta_1 and beta_1;
    vars alpha_2 and alpha_2;
    vars beta_2 and beta_2;
    vars alpha_3 and alpha_3;
    vars beta_3 and beta_3;
    vars lambda and lambda;
  enddef;
  def map between CE_velocity and parameters_izakov_et_al_1991 for
    vars v and v;
  enddef;
  def map between CE_velocity and PE_velocity for
    vars v and v;
    vars w and w;
    vars k_S_vis and k_S_vis;
    vars phi_chi and phi_chi;
  enddef;
  def map between PE_velocity and parameters for
    vars alpha_1 and alpha_1;
    vars beta_1 and beta_1;
    vars alpha_2 and alpha_2;
    vars beta_2 and beta_2;
    vars alpha_3 and alpha_3;
    vars beta_3 and beta_3;
    vars lambda and lambda;
  enddef;
  def map between average_crossbridge_force and parameters for
    vars v_max and v_max;
    vars a and a;
    vars d_h and d_h;
    vars alpha_P and alpha_P;
  enddef;
  def map between average_crossbridge_force and parameters_izakov_et_al_1991 for
    vars v_1 and v_1;
    vars alpha_G and alpha_G;
  enddef;
  def map between average_crossbridge_force and CE_velocity for
    vars v and v;
    vars phi_chi and phi_chi;
    vars p_v and p_v;
    vars p_prime_v and p_prime_v;
  enddef;
  def map between calcium_handling and parameters_izakov_et_al_1991 for
    vars a_on and a_on;
    vars a_off and a_off;
    vars k_A and k_A;
  enddef;
enddef;
