<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  saftenku_H2_model_2001.xml

CREATED :  25th May 2007

LAST MODIFIED : 25th May 2007

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.

DESCRIPTION :  This file contains a CellML description of Saftenku et al's
2001 markovian model of low activity levels of cardiac ryanodine receptors.

CHANGES:  
  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="saftenku_2001" cmeta:id="saftenku_H2_model_2001">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Markovian Models of Low and High Activity Levels of Cardiac Ryanodine Receptors</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This CellML model represents the 'H2' Markovian model of the RyR channel activity. The model runs in both OpenCell and COR and the units are consistent. Unfortunately, there are no comparable figures in the published paper for a curation check of the CellML model results. 
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: The modal gating behavior of single sheep cardiac sarcoplasmic reticulum (SR) Ca2+-release/ryanodine receptor (RyR) channels was assessed. We find that the gating of RyR channels spontaneously shifts between high (H) and low (L) levels of activity and inactive periods where no channel openings are detected (I). Moreover, we find that there is evidence for multiple gating modes within H activity, which we term H1 and H2 mode. Our results demonstrate that the underlying mechanisms regulating gating are similar in native and purified channels. Dwell-time distributions of L activity were best fitted by three open and five closed significant exponential components whereas dwell-time distributions of H1 activity were best fitted by two to three open and four closed significant exponential components. Increases in cytosolic [Ca2+] cause an increase in open probability (Po) within L activity and an increase in the probability of occurrence of H activity. Open lifetime distributions within L activity were Ca2+ independent whereas open lifetime distributions within H activity were Ca2+ dependent. This study is the first attempt to estimate RyR single-channel kinetic parameters from sequences of idealized dwell-times and to develop kinetic models of RyR gating using the criterion of maximum likelihood. We propose distinct kinetic schemes for L, H1, and H2 activity that describe the major features of sheep cardiac RyR channel gating at these levels of activity.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Markovian Models Of Low And High Activity Levels Of Cardiac Ryanodine Receptors, Elena Saftenku, Alan J. Williams and Rebecca Sitsapesan, 2001, <emphasis>Biophysical Journal</emphasis>, 80, 2727-2741. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=11371448&amp;dopt=Abstract">PubMed ID: 11371448</ulink> </para>

<informalfigure float="0" id="fig_reaction_diagrams">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>Schematic diagrams of the RyR models</title>
    </objectinfo>
    <imagedata fileref="saftenku_2001.png"/>
  </imageobject>
</mediaobject>
<caption>Kinetic models of the gating of cardiac ryanodine receptors at low and high levels of activity.</caption>
</informalfigure>

</sect1>
</article>
</documentation>
  


  
  
  
  <units name="micromolar">
    <unit units="mole" prefix="micro"/>
    <unit units="litre" exponent="-1"/>
  </units>
  
  <units name="first_order_rate_constant">
    <unit units="second" exponent="-1"/>
  </units>
  
  <units name="second_order_rate_constant">
    <unit units="micromolar" exponent="-1"/>
    <unit units="second" exponent="-1"/>
  </units>
  
  
  <component name="environment">
    <variable units="second" public_interface="out" name="time"/>
  </component>
  
  
  <component name="C1" cmeta:id="C1">
     
    <variable units="dimensionless" public_interface="out" name="C1" initial_value="0.25"/> 
    
    <variable units="second_order_rate_constant" public_interface="in" name="O2C1"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C1O2"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C1C2"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C2C1"/>
    <variable units="dimensionless" public_interface="in" name="C2"/>
    <variable units="dimensionless" public_interface="in" name="O2"/>
    <variable units="micromolar" public_interface="in" name="Ca"/>  
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> C1 </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> O2C1 </ci>
              <ci> Ca </ci>
              <ci> O2 </ci>
            </apply>
            <apply>
              <times/>
              <ci> C2C1 </ci>
              <ci> C2 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> C1O2 </ci>
              <ci> C1 </ci>
            </apply>
            <apply>
              <times/>
              <ci> C1C2 </ci>
              <ci> C1 </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="C2" cmeta:id="C2">
     
    <variable units="dimensionless" public_interface="out" name="C2" initial_value="0.25"/> 
    
    <variable units="first_order_rate_constant" public_interface="in" name="C1C2"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C2C1"/>
    <variable units="dimensionless" public_interface="in" name="C1"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> C2 </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <times/>  
            <ci> C1C2 </ci>
            <ci> C1 </ci>
          </apply>
          <apply>
            <times/>  
            <ci> C2C1 </ci>
            <ci> C2 </ci>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>

  <component name="O1" cmeta:id="O1">
     
    <variable units="dimensionless" public_interface="out" name="O1" initial_value="0.25"/> 
    
    <variable units="second_order_rate_constant" public_interface="in" name="O1O2"/>
    <variable units="first_order_rate_constant" public_interface="in" name="O2O1"/>
    <variable units="dimensionless" public_interface="in" name="O2"/>
    <variable units="micromolar" public_interface="in" name="Ca"/>  
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> O1 </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <times/>  
            <ci> O2O1 </ci>
            <ci> O2 </ci>
          </apply>
          <apply>
            <times/>  
            <ci> O1O2 </ci>
            <ci> Ca </ci>
            <ci> O1 </ci>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>

  <component name="O2" cmeta:id="O2">
     
    <variable units="dimensionless" public_interface="out" name="O2" initial_value="0.25"/> 
    
    <variable units="second_order_rate_constant" public_interface="in" name="O1O2"/>
    <variable units="first_order_rate_constant" public_interface="in" name="O2O1"/>
    <variable units="second_order_rate_constant" public_interface="in" name="O2C1"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C1O2"/>
    <variable units="dimensionless" public_interface="in" name="O1"/> 
    <variable units="dimensionless" public_interface="in" name="C1"/>
    <variable units="micromolar" public_interface="in" name="Ca"/>  
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> O2 </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> O1O2 </ci>
              <ci> Ca </ci>
              <ci> O1 </ci>
            </apply>
            <apply>
              <times/>  
              <ci> C1O2 </ci>
              <ci> C1 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> O2O1 </ci>
              <ci> O2 </ci>
            </apply>
            <apply>
              <times/>  
              <ci> O2C1 </ci>
              <ci> Ca </ci>
              <ci> O2 </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="reaction_constants">
    <variable units="first_order_rate_constant" public_interface="out" name="C1C2" initial_value="60.8"/>
    <variable units="first_order_rate_constant" public_interface="out" name="C2C1" initial_value="198.0"/>
    <variable units="second_order_rate_constant" public_interface="out" name="O1O2" initial_value="2.41"/>
    <variable units="first_order_rate_constant" public_interface="out" name="O2O1" initial_value="85.1"/>
    <variable units="first_order_rate_constant" public_interface="out" name="C1O2" initial_value="2277.0"/>
    <variable units="second_order_rate_constant" public_interface="out" name="O2C1" initial_value="2.62"/>
    <variable units="micromolar" public_interface="out" name="Ca" initial_value="50.0"/> 
  </component>
  
  <connection>
    <map_components component_2="environment" component_1="C1"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="C2"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="O1"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="O2"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="C2" component_1="C1"/>
    <map_variables variable_2="C1" variable_1="C1"/>
    <map_variables variable_2="C2" variable_1="C2"/>
  </connection>
  
  <connection>
    <map_components component_2="O2" component_1="C1"/>
    <map_variables variable_2="C1" variable_1="C1"/>
    <map_variables variable_2="O2" variable_1="O2"/>
  </connection>

  <connection>
    <map_components component_2="O2" component_1="O1"/>
    <map_variables variable_2="O1" variable_1="O1"/>
    <map_variables variable_2="O2" variable_1="O2"/>
  </connection>
  
  <connection>
    <map_components component_2="reaction_constants" component_1="C1"/>
    <map_variables variable_2="C2C1" variable_1="C2C1"/>
    <map_variables variable_2="C1C2" variable_1="C1C2"/>
    <map_variables variable_2="O2C1" variable_1="O2C1"/>
    <map_variables variable_2="C1O2" variable_1="C1O2"/>
    <map_variables variable_2="Ca" variable_1="Ca"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="C2"/>
    <map_variables variable_2="C2C1" variable_1="C2C1"/>
    <map_variables variable_2="C1C2" variable_1="C1C2"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="O2"/>
    <map_variables variable_2="O2C1" variable_1="O2C1"/>
    <map_variables variable_2="C1O2" variable_1="C1O2"/>
    <map_variables variable_2="O1O2" variable_1="O1O2"/>
    <map_variables variable_2="O2O1" variable_1="O2O1"/>
    <map_variables variable_2="Ca" variable_1="Ca"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="O1"/>
    <map_variables variable_2="O1O2" variable_1="O1O2"/>
    <map_variables variable_2="O2O1" variable_1="O2O1"/>
    <map_variables variable_2="Ca" variable_1="Ca"/>
  </connection>

 

<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#2e0de88c-08f9-4204-9504-873af4d211ca">
    <rdf:li>Cardiac Myocyte</rdf:li>
    <rdf:li>calcium dynamics</rdf:li>
    <rdf:li>ryanodine receptors</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#345d78ee-389a-4e9b-83f6-70a2e077da45">
    <rdf:li rdf:resource="rdf:#c10fd309-9baf-4bb4-b4e1-bb2bebdc7c62"/>
    <rdf:li rdf:resource="rdf:#dd44f90f-8ab5-42aa-8464-c1510138f997"/>
    <rdf:li rdf:resource="rdf:#c51cd693-e774-4c6d-aee5-494ea10b4bf2"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#d194792a-7cdc-4b37-aa3c-da8dca8d0484">
    <dcterms:modified rdf:resource="rdf:#e8fa3546-7f0e-4d3d-8e45-660aeeb88d56"/>
    <rdf:value>Gave C1 an initial value of 1.0 - this allows the model to produce a curve, rather than a flat line output. This is still unlikely to be the correct output as the model is supposed to depend on voltage and changing calcium levels.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#67b4cac4-8770-4336-912a-e135095ffaa7"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#afcd8d33-91f9-43c8-a58b-42c13dabf3db">
    <dcterms:W3CDTF>2007-06-05T10:43:01+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#69e07992-baa1-4838-a534-12772e841417">
    <dcterms:W3CDTF>2007-05-25T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:title>Markovian Models of Low and High Activity Levals of Cardiac Ryanodine Receptors (H2 Model)</dc:title>
    <dc:publisher>The University of Auckland, Auckland Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#7c004fcf-0bdf-4943-9597-cd913b51deb5"/>
    <dcterms:created rdf:resource="rdf:#69e07992-baa1-4838-a534-12772e841417"/>
    <dc:creator rdf:resource="rdf:#8a46909b-3f09-4c9c-8caa-bd82034bc302"/>
    <cmeta:modification rdf:resource="rdf:#d194792a-7cdc-4b37-aa3c-da8dca8d0484"/>
    <cmeta:modification rdf:resource="rdf:#bfd7cc87-8f2a-4660-9e4b-6563b37cb46b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#50bcd039-2d5e-41ed-9bbf-538be15f76af">
    <vCard:Given>Alan</vCard:Given>
    <vCard:Family>Williams</vCard:Family>
    <vCard:Other>J</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8a46909b-3f09-4c9c-8caa-bd82034bc302">
    <vCard:ORG rdf:resource="rdf:#b7c69baf-3bac-4699-abcf-af0b47a3717c"/>
    <vCard:EMAIL rdf:resource="rdf:#bec2cc3c-a1cc-4002-83fb-6ddf12386518"/>
    <vCard:N rdf:resource="rdf:#4b06ef8f-3165-40f8-a015-a7827cc588ff"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8b5543ce-69e6-4a4d-838f-0e4f4664a022">
    <dc:title>Biophysical Journal</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#80b2af0a-0dd5-49e8-915e-4883d8fc9a25">
    <bqs:Pubmed_id>11371448</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#192b151f-ce29-45f5-b452-abe97a8b19a6"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c10fd309-9baf-4bb4-b4e1-bb2bebdc7c62">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#19bae577-cf75-476d-821a-920e58fc43dd"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#dd44f90f-8ab5-42aa-8464-c1510138f997">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#50bcd039-2d5e-41ed-9bbf-538be15f76af"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#192b151f-ce29-45f5-b452-abe97a8b19a6">
    <dc:creator rdf:resource="rdf:#345d78ee-389a-4e9b-83f6-70a2e077da45"/>
    <dc:title>Markovian Models of Low and High Activity Levals of Cardiac Ryanodine Receptors</dc:title>
    <bqs:volume>80</bqs:volume>
    <bqs:first_page>2727</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#8b5543ce-69e6-4a4d-838f-0e4f4664a022"/>
    <dcterms:issued rdf:resource="rdf:#34e0333b-0c95-4285-93c9-fc83ce117cd8"/>
    <bqs:last_page>2741</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#efa37867-a7d0-4713-8847-06ea964329c2">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#2e0de88c-08f9-4204-9504-873af4d211ca"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c51cd693-e774-4c6d-aee5-494ea10b4bf2">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#0f289d2b-0068-42a5-9538-36e1cb05127c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fb512652-61cb-4402-954b-53fc7862ce6f">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b7c69baf-3bac-4699-abcf-af0b47a3717c">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#34e0333b-0c95-4285-93c9-fc83ce117cd8">
    <dcterms:W3CDTF>2001-06</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bfd7cc87-8f2a-4660-9e4b-6563b37cb46b">
    <dcterms:modified rdf:resource="rdf:#afcd8d33-91f9-43c8-a58b-42c13dabf3db"/>
    <rdf:value>The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics. This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology. 

The model runs in the PCEnv simulator but gives a flat output.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#9562f0fa-4e59-4d89-96f0-5eeb1823c11a"/>
  </rdf:Description>
  <rdf:Description rdf:about="#C1">
    <dcterms:alternative>closed state 1</dcterms:alternative>
    <dc:title>C1</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#saftenku_H2_model_2001">
    <dc:title>
        Saftenku et al's 2001 markovian model of low activity levels of cardiac ryanodine receptors.
      </dc:title>
    <cmeta:bio_entity>Cardiac Myocyte</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#73b5a82d-ecc8-4112-9527-75402336c71f"/>
    <bqs:reference rdf:resource="rdf:#041a0e98-f71c-4556-b1e0-4ff0206ec54c"/>
    <bqs:reference rdf:resource="rdf:#80b2af0a-0dd5-49e8-915e-4883d8fc9a25"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#041a0e98-f71c-4556-b1e0-4ff0206ec54c">
    <dc:subject rdf:resource="rdf:#efa37867-a7d0-4713-8847-06ea964329c2"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4b06ef8f-3165-40f8-a015-a7827cc588ff">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b69ecaa8-d7c1-481e-9313-69f27fd9f8e6">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9562f0fa-4e59-4d89-96f0-5eeb1823c11a">
    <vCard:N rdf:resource="rdf:#fb512652-61cb-4402-954b-53fc7862ce6f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bec2cc3c-a1cc-4002-83fb-6ddf12386518">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0f289d2b-0068-42a5-9538-36e1cb05127c">
    <vCard:Given>Rebecca</vCard:Given>
    <vCard:Family>Sitsapesan</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e8fa3546-7f0e-4d3d-8e45-660aeeb88d56">
    <dcterms:W3CDTF>2007-08-21T10:49:53+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="#C2">
    <dcterms:alternative>closed state 2</dcterms:alternative>
    <dc:title>C2</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7c004fcf-0bdf-4943-9597-cd913b51deb5">
    <dc:creator rdf:resource="rdf:#2d327eef-6116-4129-b18a-a33bdf45bda0"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#19bae577-cf75-476d-821a-920e58fc43dd">
    <vCard:Given>Elena</vCard:Given>
    <vCard:Family>Saftenku</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#73b5a82d-ecc8-4112-9527-75402336c71f">
    <dc:creator rdf:resource="rdf:#b69ecaa8-d7c1-481e-9313-69f27fd9f8e6"/>
    <rdf:value>This is the CellML description of Saftenku et al's 2001 markovian 
          model of low activity levels of cardiac ryanodine receptors.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="#O2">
    <dcterms:alternative>open state 2</dcterms:alternative>
    <dc:title>O2</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d575b5f1-eb90-43ca-bcd5-11c33c35378e">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#67b4cac4-8770-4336-912a-e135095ffaa7">
    <vCard:N rdf:resource="rdf:#d575b5f1-eb90-43ca-bcd5-11c33c35378e"/>
  </rdf:Description>
  <rdf:Description rdf:about="#O1">
    <dcterms:alternative>open state 1</dcterms:alternative>
    <dc:title>O1</dc:title>
  </rdf:Description>
</rdf:RDF>
</model>