<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  saftenku_low_model_2001.xml

CREATED :  25th May 2007

LAST MODIFIED : 25th May 2007

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.

DESCRIPTION :  This file contains a CellML description of Saftenku et al's
2001 markovian model of low activity levels of cardiac ryanodine receptors.

CHANGES:  
  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="saftenku_2001" cmeta:id="saftenku_low_model_2001">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Markovian Models of Low and High Activity Levels of Cardiac Ryanodine Receptors</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
           This CellML model represents the 'low' Markovian model of the RyR channel activity. The model runs in both OpenCell and COR and the units are consistent. Unfortunately, there are no comparable figures in the published paper for a curation check of the CellML model results. 
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: The modal gating behavior of single sheep cardiac sarcoplasmic reticulum (SR) Ca2+-release/ryanodine receptor (RyR) channels was assessed. We find that the gating of RyR channels spontaneously shifts between high (H) and low (L) levels of activity and inactive periods where no channel openings are detected (I). Moreover, we find that there is evidence for multiple gating modes within H activity, which we term H1 and H2 mode. Our results demonstrate that the underlying mechanisms regulating gating are similar in native and purified channels. Dwell-time distributions of L activity were best fitted by three open and five closed significant exponential components whereas dwell-time distributions of H1 activity were best fitted by two to three open and four closed significant exponential components. Increases in cytosolic [Ca2+] cause an increase in open probability (Po) within L activity and an increase in the probability of occurrence of H activity. Open lifetime distributions within L activity were Ca2+ independent whereas open lifetime distributions within H activity were Ca2+ dependent. This study is the first attempt to estimate RyR single-channel kinetic parameters from sequences of idealized dwell-times and to develop kinetic models of RyR gating using the criterion of maximum likelihood. We propose distinct kinetic schemes for L, H1, and H2 activity that describe the major features of sheep cardiac RyR channel gating at these levels of activity.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Markovian Models Of Low And High Activity Levels Of Cardiac Ryanodine Receptors, Elena Saftenku, Alan J. Williams and Rebecca Sitsapesan, 2001, <emphasis>Biophysical Journal</emphasis>, 80, 2727-2741. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=11371448&amp;dopt=Abstract">PubMed ID: 11371448</ulink> </para>

<informalfigure float="0" id="fig_reaction_diagrams">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>Schematic diagrams of the RyR models</title>
    </objectinfo>
    <imagedata fileref="saftenku_2001.png"/>
  </imageobject>
</mediaobject>
<caption>Kinetic models of the gating of cardiac ryanodine receptors at low and high levels of activity.</caption>
</informalfigure>

</sect1>
</article>
</documentation>

  
  
  
  <units name="micromolar">
    <unit units="mole" prefix="micro"/>
    <unit units="litre" exponent="-1"/>
  </units>
  
  <units name="first_order_rate_constant">
    <unit units="second" exponent="-1"/>
  </units>
  
  <units name="second_order_rate_constant">
    <unit units="micromolar" exponent="-1"/>
    <unit units="second" exponent="-1"/>
  </units>
  
  
  <component name="environment">
    <variable units="second" public_interface="out" name="time"/>
  </component>
  
  
  <component name="C1" cmeta:id="C1">
     
    <variable units="dimensionless" public_interface="out" name="C1" initial_value="0.125"/> 
    
    <variable units="second_order_rate_constant" public_interface="in" name="C1C2"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C2C1"/>
    <variable units="dimensionless" public_interface="in" name="C2"/>
    <variable units="micromolar" public_interface="in" name="Ca"/>  
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> C1 </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <times/>  
            <ci> C2C1 </ci>
            <ci> C2 </ci>
          </apply>
          <apply>
            <times/>  
            <ci> C1C2 </ci>
            <ci> Ca </ci>
            <ci> C2 </ci>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="C2" cmeta:id="C2">
     
    <variable units="dimensionless" public_interface="out" name="C2" initial_value="0.125"/> 
    
    <variable units="second_order_rate_constant" public_interface="in" name="C1C2"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C2C1"/>
    <variable units="second_order_rate_constant" public_interface="in" name="C2C3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C3C2"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C2C5"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C5C2"/>
    <variable units="dimensionless" public_interface="in" name="C1"/>
    <variable units="dimensionless" public_interface="in" name="C3"/>
    <variable units="dimensionless" public_interface="in" name="C5"/>
    <variable units="micromolar" public_interface="in" name="Ca"/>  
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> C2 </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> C1C2 </ci>
			  <ci> Ca </ci>
              <ci> C1 </ci>
            </apply>
            <apply>
              <times/>
              <ci> C3C2 </ci>
              <ci> C3 </ci>
            </apply>
            <apply>
              <times/>
              <ci> C5C2 </ci>
              <ci> C5 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> C2C1 </ci>
              <ci> C2 </ci>
            </apply>
            <apply>
              <times/>
              <ci> C2C3 </ci>
              <ci> Ca </ci>
              <ci> C2 </ci>
            </apply>
            <apply>
              <times/>
              <ci> C2C5 </ci>
              <ci> C2 </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="C3" cmeta:id="C3">
     
    <variable units="dimensionless" public_interface="out" name="C3" initial_value="0.125"/> 
    
    <variable units="first_order_rate_constant" public_interface="in" name="O1C3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C3O1"/>
    <variable units="second_order_rate_constant" public_interface="in" name="C2C3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C3C2"/>
    <variable units="first_order_rate_constant" public_interface="in" name="O2C3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C3O2"/>
    <variable units="first_order_rate_constant" public_interface="in" name="O3C3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C3O3"/>
    <variable units="dimensionless" public_interface="in" name="C2"/>
    <variable units="dimensionless" public_interface="in" name="O1"/>
    <variable units="dimensionless" public_interface="in" name="O2"/> 
    <variable units="dimensionless" public_interface="in" name="O3"/>
    <variable units="micromolar" public_interface="in" name="Ca"/> 
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> C3 </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> C2C3 </ci>
              <ci> Ca </ci>
              <ci> C2 </ci>
            </apply>
            <apply>
              <times/>  
              <ci> O1C3 </ci>
              <ci> O1 </ci>
            </apply>
            <apply>
              <times/>
              <ci> O3C3 </ci>
              <ci> O3 </ci>
            </apply>
            <apply>
              <times/>
              <ci> O2C3 </ci>
              <ci> O2 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> C3C2 </ci>
              <ci> C3 </ci>
            </apply>
            <apply>
              <times/>  
              <ci> C3O1 </ci>
              <ci> C3 </ci>
            </apply>
            <apply>
              <times/>
              <ci> C3O2 </ci>
              <ci> C3 </ci>
            </apply>
            <apply>
              <times/>
              <ci> C3O3 </ci>
              <ci> C3 </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="C4" cmeta:id="C4">
     
    <variable units="dimensionless" public_interface="out" name="C4" initial_value="0.125"/> 
    
    <variable units="first_order_rate_constant" public_interface="in" name="O2C4"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C4O2"/>
    <variable units="first_order_rate_constant" public_interface="in" name="O3C4"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C4O3"/>
    <variable units="dimensionless" public_interface="in" name="O2"/> 
    <variable units="dimensionless" public_interface="in" name="O3"/> 
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> C4 </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> O2C4 </ci>
              <ci> O2 </ci>
            </apply>
            <apply>
              <times/>  
              <ci> O3C4 </ci>
              <ci> O3 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> C4O2 </ci>
              <ci> C4 </ci>
            </apply>
            <apply>
              <times/>  
              <ci> C4O3 </ci>
              <ci> C4 </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="C5" cmeta:id="C5">
     
    <variable units="dimensionless" public_interface="out" name="C5" initial_value="0.125"/> 
    
    <variable units="first_order_rate_constant" public_interface="in" name="C2C5"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C5C2"/>
    <variable units="dimensionless" public_interface="in" name="C2"/> 
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> C5 </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <times/>  
            <ci> C2C5 </ci>
            <ci> C2 </ci>
          </apply>
          <apply>
            <times/>  
            <ci> C5C2 </ci>
            <ci> C5 </ci>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="O1" cmeta:id="O1">
     
    <variable units="dimensionless" public_interface="out" name="O1" initial_value="0.125"/> 
    
    <variable units="first_order_rate_constant" public_interface="in" name="O1C3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C3O1"/>
    <variable units="dimensionless" public_interface="in" name="C3"/> 
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> O1 </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <times/>  
            <ci> C3O1 </ci>
            <ci> C3 </ci>
          </apply>
          <apply>
            <times/>  
            <ci> O1C3 </ci>
            <ci> O1 </ci>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="O2" cmeta:id="O2">
     
    <variable units="dimensionless" public_interface="out" name="O2" initial_value="0.125"/> 
    
    <variable units="first_order_rate_constant" public_interface="in" name="C3O2"/>
    <variable units="first_order_rate_constant" public_interface="in" name="O2C3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="O2C4"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C4O2"/>
    <variable units="dimensionless" public_interface="in" name="C3"/> 
    <variable units="dimensionless" public_interface="in" name="C4"/> 
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> O2 </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> C3O2 </ci>
              <ci> C3 </ci>
            </apply>
            <apply>
              <times/>  
              <ci> C4O2 </ci>
              <ci> C4 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> O2C3 </ci>
              <ci> O2 </ci>
            </apply>
            <apply>
              <times/>  
              <ci> O2C4 </ci>
              <ci> O2 </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
 
  <component name="O3" cmeta:id="O3">
     
    <variable units="dimensionless" public_interface="out" name="O3" initial_value="0.125"/> 
    
    <variable units="first_order_rate_constant" public_interface="in" name="C3O3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="O3C3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="O3C4"/>
    <variable units="first_order_rate_constant" public_interface="in" name="C4O3"/>
    <variable units="dimensionless" public_interface="in" name="C3"/> 
    <variable units="dimensionless" public_interface="in" name="C4"/> 
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> O3 </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> C3O3 </ci>
              <ci> C3 </ci>
            </apply>
            <apply>
              <times/>  
              <ci> C4O3 </ci>
              <ci> C4 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> O3C3 </ci>
              <ci> O3 </ci>
            </apply>
            <apply>
              <times/>  
              <ci> O3C4 </ci>
              <ci> O3 </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="reaction_constants">
    <variable units="second_order_rate_constant" public_interface="out" name="C1C2" initial_value="2.5"/>
    <variable units="first_order_rate_constant" public_interface="out" name="C2C1" initial_value="13.3"/>
    <variable units="second_order_rate_constant" public_interface="out" name="C2C3" initial_value="68.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="C3C2" initial_value="8000.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="C3O2" initial_value="17.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="O2C3" initial_value="92.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="O2C4" initial_value="1900.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="C4O2" initial_value="520.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="C3O3" initial_value="14.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="O3C3" initial_value="138.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="O3C4" initial_value="300.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="C4O3" initial_value="46.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="C3O1" initial_value="1100.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="O1C3" initial_value="3400.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="C2C5" initial_value="0.13"/>
    <variable units="first_order_rate_constant" public_interface="out" name="C5C2" initial_value="3.6"/>
    <variable units="micromolar" public_interface="out" name="Ca" initial_value="20.0"/> 
  </component>
  
  <connection>
    <map_components component_2="environment" component_1="C1"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="C2"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="C3"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="C4"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="C5"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="O1"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="O2"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="O3"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="C2" component_1="C1"/>
    <map_variables variable_2="C1" variable_1="C1"/>
    <map_variables variable_2="C2" variable_1="C2"/>
  </connection>
  
  <connection>
    <map_components component_2="C5" component_1="C2"/>
    <map_variables variable_2="C2" variable_1="C2"/>
    <map_variables variable_2="C5" variable_1="C5"/>
  </connection>
  
  <connection>
    <map_components component_2="C3" component_1="C2"/>
    <map_variables variable_2="C2" variable_1="C2"/>
    <map_variables variable_2="C3" variable_1="C3"/>
  </connection>
  
  <connection>
    <map_components component_2="O1" component_1="C3"/>
    <map_variables variable_2="C3" variable_1="C3"/>
    <map_variables variable_2="O1" variable_1="O1"/>
  </connection>

  <connection>
    <map_components component_2="O2" component_1="C3"/>
    <map_variables variable_2="C3" variable_1="C3"/>
    <map_variables variable_2="O2" variable_1="O2"/>
  </connection>

  <connection>
    <map_components component_2="O3" component_1="C3"/>
    <map_variables variable_2="C3" variable_1="C3"/>
    <map_variables variable_2="O3" variable_1="O3"/>
  </connection>
  
  <connection>
    <map_components component_2="O2" component_1="C4"/>
    <map_variables variable_2="C4" variable_1="C4"/>
    <map_variables variable_2="O2" variable_1="O2"/>
  </connection>

  <connection>
    <map_components component_2="O3" component_1="C4"/>
    <map_variables variable_2="C4" variable_1="C4"/>
    <map_variables variable_2="O3" variable_1="O3"/>
  </connection>
  
  <connection>
    <map_components component_2="reaction_constants" component_1="C1"/>
    <map_variables variable_2="C2C1" variable_1="C2C1"/>
    <map_variables variable_2="C1C2" variable_1="C1C2"/>
    <map_variables variable_2="Ca" variable_1="Ca"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="C2"/>
    <map_variables variable_2="C2C1" variable_1="C2C1"/>
    <map_variables variable_2="C1C2" variable_1="C1C2"/>
    <map_variables variable_2="C2C5" variable_1="C2C5"/>
    <map_variables variable_2="C5C2" variable_1="C5C2"/>
    <map_variables variable_2="C2C3" variable_1="C2C3"/>
    <map_variables variable_2="C3C2" variable_1="C3C2"/>
    <map_variables variable_2="Ca" variable_1="Ca"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="C3"/>
    <map_variables variable_2="O2C3" variable_1="O2C3"/>
    <map_variables variable_2="C3O2" variable_1="C3O2"/>
    <map_variables variable_2="O3C3" variable_1="O3C3"/>
    <map_variables variable_2="C3O3" variable_1="C3O3"/>
    <map_variables variable_2="O1C3" variable_1="O1C3"/>
    <map_variables variable_2="C3O1" variable_1="C3O1"/>
    <map_variables variable_2="C2C3" variable_1="C2C3"/>
    <map_variables variable_2="C3C2" variable_1="C3C2"/>
    <map_variables variable_2="Ca" variable_1="Ca"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="C4"/>
    <map_variables variable_2="O2C4" variable_1="O2C4"/>
    <map_variables variable_2="C4O2" variable_1="C4O2"/>
    <map_variables variable_2="O3C4" variable_1="O3C4"/>
    <map_variables variable_2="C4O3" variable_1="C4O3"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="C5"/>
    <map_variables variable_2="C2C5" variable_1="C2C5"/>
    <map_variables variable_2="C5C2" variable_1="C5C2"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="O1"/>
    <map_variables variable_2="O1C3" variable_1="O1C3"/>
    <map_variables variable_2="C3O1" variable_1="C3O1"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="O2"/>
    <map_variables variable_2="O2C3" variable_1="O2C3"/>
    <map_variables variable_2="C3O2" variable_1="C3O2"/>
    <map_variables variable_2="O2C4" variable_1="O2C4"/>
    <map_variables variable_2="C4O2" variable_1="C4O2"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="O3"/>
    <map_variables variable_2="O3C3" variable_1="O3C3"/>
    <map_variables variable_2="C3O3" variable_1="C3O3"/>
    <map_variables variable_2="O3C4" variable_1="O3C4"/>
    <map_variables variable_2="C4O3" variable_1="C4O3"/>
  </connection>




<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#9b046b3d-e2df-4b41-aa47-b4e433c842d0">
    <rdf:li>calcium dynamics</rdf:li>
    <rdf:li>ryanodine receptor</rdf:li>
    <rdf:li>signal transduction</rdf:li>
    <rdf:li>cardiac myocyte</rdf:li>
    <rdf:li>Cardiac Myocyte</rdf:li>
    <rdf:li>cardiac</rdf:li>
    <rdf:li>ryanodine receptors</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#0df67349-4584-41ca-91f3-5dedd13c91b8">
    <rdf:li rdf:resource="rdf:#20d04ea1-6474-4187-899e-394b778a725f"/>
    <rdf:li rdf:resource="rdf:#3d4cb7ae-dc21-4b87-9ddb-94555182ae14"/>
    <rdf:li rdf:resource="rdf:#21983e71-ab52-46e7-b5e1-8940b5d6af80"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#5281f64e-4b77-45c8-87cb-ecf93eec3556">
    <dcterms:W3CDTF>2007-08-21T10:50:06+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ca761942-6aa7-48db-b5a8-78a716cc5211">
    <dcterms:W3CDTF>2007-05-25T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#253586ff-acc7-4a3c-9fad-dc94e33db4fe">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#29b80e5e-bbf0-4df6-b037-87e14dde96be">
    <dcterms:modified rdf:resource="rdf:#db0e7869-ff84-49df-b14d-dd2904357b86"/>
    <rdf:value>The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics. This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology. 

The model runs in the PCEnv simulator but gives a flat output.
</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#2053e194-cdfe-48bf-98c4-daed1cda8123"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#21983e71-ab52-46e7-b5e1-8940b5d6af80">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#d2d571cf-fe3b-453a-921c-239d00753380"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f91b2aa5-4201-4f79-8006-0c0b56cf15d9">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d2d571cf-fe3b-453a-921c-239d00753380">
    <vCard:Given>Rebecca</vCard:Given>
    <vCard:Family>Sitsapesan</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#986355fb-175a-470c-a3da-fd91248613d1">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2141fdf3-ffed-485b-a571-6f5f1834d692">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7e6ec5d6-0bce-4f5f-a773-3168c81714ae">
    <bqs:Pubmed_id>11371448</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#f6cf8460-0558-426f-a193-9249d504802f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f6cf8460-0558-426f-a193-9249d504802f">
    <dc:creator rdf:resource="rdf:#0df67349-4584-41ca-91f3-5dedd13c91b8"/>
    <dc:title>Markovian Models of Low and High Activity Levals of Cardiac                      Ryanodine Receptors</dc:title>
    <bqs:volume>80</bqs:volume>
    <bqs:first_page>2727</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#1c2eb015-dfe9-4726-aca3-e92ab4a530b9"/>
    <dcterms:issued rdf:resource="rdf:#357316d1-a18c-4d5e-9434-162c51507145"/>
    <bqs:last_page>2741</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a276f149-0b51-40fe-a255-1f8d0138c909">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#9b046b3d-e2df-4b41-aa47-b4e433c842d0"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3d4cb7ae-dc21-4b87-9ddb-94555182ae14">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#ab5cda8c-3c35-47e7-86bb-ab3f4155c635"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1c2eb015-dfe9-4726-aca3-e92ab4a530b9">
    <dc:title>Biophysical Journal</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b7c55023-1ac2-4200-b920-1b89fdc70b70">
    <dc:creator rdf:resource="rdf:#47096f45-1594-4d4c-87da-b399ce37a1dc"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1ac5704e-212e-49c0-b431-5e454f66270c">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#db0e7869-ff84-49df-b14d-dd2904357b86">
    <dcterms:W3CDTF>2007-06-05T10:42:08+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="#saftenku_low_model_2001">
    <dc:title>
        Saftenku et al's 2001 markovian model of low activity levels of cardiac ryanodine receptors.
      </dc:title>
    <cmeta:bio_entity>Cardiac Myocyte</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#cc18644f-7ded-40bd-b754-78bbe9eab5a8"/>
    <bqs:reference rdf:resource="rdf:#5f808d9e-7bb4-4482-b443-59580e40b565"/>
    <bqs:reference rdf:resource="rdf:#7e6ec5d6-0bce-4f5f-a773-3168c81714ae"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1f318789-73bc-4b2f-b833-a763970d6188">
    <vCard:Given>Elena</vCard:Given>
    <vCard:Family>Saftenku</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#010de219-caa0-46b5-8724-66ba4bdd52ea">
    <vCard:N rdf:resource="rdf:#253586ff-acc7-4a3c-9fad-dc94e33db4fe"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e2a41ec0-8c3f-4d45-aaaf-1e911de22a84">
    <vCard:ORG rdf:resource="rdf:#986355fb-175a-470c-a3da-fd91248613d1"/>
    <vCard:EMAIL rdf:resource="rdf:#f91b2aa5-4201-4f79-8006-0c0b56cf15d9"/>
    <vCard:N rdf:resource="rdf:#cefeea86-d702-4232-8b89-a16c1203d5b8"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#41cd4b18-b9c5-469c-b4ae-33c63f06178c">
    <dcterms:modified rdf:resource="rdf:#5281f64e-4b77-45c8-87cb-ecf93eec3556"/>
    <rdf:value>Gave C1 an initial value of 1.0 - this allows the model to produce a curve, rather than a flat line output. This is still unlikely to be the correct output as the model is supposed to depend on voltage and changing calcium levels.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#010de219-caa0-46b5-8724-66ba4bdd52ea"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#cc18644f-7ded-40bd-b754-78bbe9eab5a8">
    <dc:creator rdf:resource="rdf:#1ac5704e-212e-49c0-b431-5e454f66270c"/>
    <rdf:value>This is the CellML description of Saftenku et al's 2001 markovian model of low activity levels of cardiac ryanodine receptors.

These models can be run in PCEnv but they give a flat output.  I suspect they need to be embedded within a whole cell model in order to give a reasonable output.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="#C4">
    <dcterms:alternative>closed state 4</dcterms:alternative>
    <dc:title>C4</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#C5">
    <dcterms:alternative>closed state 5</dcterms:alternative>
    <dc:title>C5</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#C2">
    <dcterms:alternative>closed state 2</dcterms:alternative>
    <dc:title>C2</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#C3">
    <dcterms:alternative>closed state 3</dcterms:alternative>
    <dc:title>C3</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ab5cda8c-3c35-47e7-86bb-ab3f4155c635">
    <vCard:Given>Alan</vCard:Given>
    <vCard:Family>Williams</vCard:Family>
    <vCard:Other>J</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="#C1">
    <dcterms:alternative>closed state 1</dcterms:alternative>
    <dc:title>C1</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:title>Markovian Models of Low and High Activity Levals of Cardiac Ryanodine Receptors (Low Model)</dc:title>
	<dc:publisher>The University of Auckland, Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#b7c55023-1ac2-4200-b920-1b89fdc70b70"/>
    <dcterms:created rdf:resource="rdf:#ca761942-6aa7-48db-b5a8-78a716cc5211"/>
    <dc:creator rdf:resource="rdf:#e2a41ec0-8c3f-4d45-aaaf-1e911de22a84"/>
    <cmeta:modification rdf:resource="rdf:#41cd4b18-b9c5-469c-b4ae-33c63f06178c"/>
    <cmeta:modification rdf:resource="rdf:#29b80e5e-bbf0-4df6-b037-87e14dde96be"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#20d04ea1-6474-4187-899e-394b778a725f">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#1f318789-73bc-4b2f-b833-a763970d6188"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2053e194-cdfe-48bf-98c4-daed1cda8123">
    <vCard:N rdf:resource="rdf:#2141fdf3-ffed-485b-a571-6f5f1834d692"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5f808d9e-7bb4-4482-b443-59580e40b565">
    <dc:subject rdf:resource="rdf:#a276f149-0b51-40fe-a255-1f8d0138c909"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#cefeea86-d702-4232-8b89-a16c1203d5b8">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#357316d1-a18c-4d5e-9434-162c51507145">
    <dcterms:W3CDTF>2001-06</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="#O2">
    <dcterms:alternative>open state 2</dcterms:alternative>
    <dc:title>O2</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#O3">
    <dcterms:alternative>open state 3</dcterms:alternative>
    <dc:title>O3</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#O1">
    <dcterms:alternative>open state 1</dcterms:alternative>
    <dc:title>O1</dc:title>
  </rdf:Description>
</rdf:RDF>
</model>
