//   FILE :  yi_model_2003.xml
//
// CREATED :  27th December 2002
//
// LAST MODIFIED : 2nd May 2005
//
// AUTHOR :  Catherine Lloyd
//           The Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Yi et al's 2003 mathematical model of volume shifts and ionic concentration changes during ischemia and hypoxia.
//
// CHANGES:
//   09/04/2003 - AAC - Added publication date information.
//   02/05/2005 - PJV - Changed unit dimensions to make them consistent.
// publisher: The University of Auckland, Bioengineering Institute
// modification: W3CDTF 2005-05-02; Changed unit dimensions to make them consistent.; Given Peter; Family Villiger; Other J
// modification: W3CDTF 2003-04-09; Added publication date information.; Given Autumn; Family Cuellar; Other A
// created: W3CDTF 2002-12-27
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: Yi et al's 2003 mathematical model of volume shifts and ionic concentration changes during ischemia and hypoxia.
// bio_entity: Cardiac Myocyte
// bio_entity: Neurons
// comment: FN Catherine Lloyd; This is the CellML description of Yi et al's 2003 mathematical model of volume shifts and ionic concentration changes during ischemia and hypoxia.
// reference: Pubmed_id 12453453; Given Chung-Seon; Family Yi; Given Aaron; Family Fogelson; Other L; Given James; Family Keener; Other P; Given Charles; Family Peskin; Other S; title A Mathematical Study of Volume Shifts and Ionic Concentration Changes during Ischemia and Hypoxia; volume 220; first_page 83; title Journal of Theoretical Biology; W3CDTF 2003-01-07; last_page 106
// reference: subject_type keyword; Cardiac Myocyte; calcium dynamics; electrophysiology; ischemia; hypoxia
def model yi_fogelson_keener_peskin_2003_version01 as
  // Modelling Volume Shifts and Ionic Concentration Changes during Ischemia and Hypoxia
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This is the original unchecked version of the model imported from the previous CellML model repository, 24-Jan-2006.
  //
  // Model Structure
  //
  // Ischemia arises when both blood flow and oxygen transport to a tissue stop, while hypoxia describes a condition where normal blood flow continues but there is a reduction in the supply of oxygen to the tissue. For both hypoxia and ischemia, depriving the tissue of oxygen causes cells to switch from aerobic to anaerobic respiration. This results in reduced ATP synthesis, which in turn decreases the effectiveness of the cell membrane ion pumps, especially the Na-K-ATPase pump. Additionally, in the case of ischemia, reduced blood flow has the effect of reducing the tissue's supply of metabolic substrates, and it also reduces the efficiency of waste product removal.
  //
  // Ischemia and hypoxia have been experimentally studied in a wide variety of species and different tissue types. Tissue responses to ischemia include swelling of the intracellular space, shrinkage of the extracellular space, and an increase in the extracellular potassium concentration ([K+]e). In neural tissue, this increase in extracellular potassium concentration occurs in two stages; an initial rapid increase from about 5 mM to 55 mM, followed by a slower increase up to 80 mM. In cardiac myocytes, there are generally three phases observed: a rapid increase, a relative plateau, and a second, slower increase. These increases in extracellular potassium concentration may have important pathological consequences. For example, in cardiac ischemia, the increased [K+]e may cause arrhythmias.
  //
  // In 2003, Chung-Seon Yi, Aaron L. Fogelson, James P. Keener, and Charles S. Peskin studied the possible mechanisms underlying extracellular potassium accumulation during ischemia. They developed a simple Hodgkin-Huxley type ionic model, which unlike other previously published models of cardiac myocytes, includes extracellular volume, capillary flow and the influence of nearby healthy tissue as variables (see figure 1 and figure 2 below). The model describes events in a tissue consisting of a collection of homogeneous cells subject to ischemia or hypoxia, a homogeneous extracellular space surrounding three cells, a capillary compartment representing the vasculature for this piece of tissue, and another compartment corresponding to the healthy tissue surrounding the ischemic or hypoxic tissue. The first three compartments combine to form the damaged tissue.
  //
  // Model simulations produce a response to ischemia similar to that seen in neural tissue, and the mechanisms underlying this process in the model is elucidated. However, Yi et al. found that the same underlying mechanism is not present in the cardiac ion model, and they suggest that this difference may explain the qualitative difference in response observed in cardiac tissue.
  //
  // The complete original paper reference is cited below:
  //
  // A Mathematical Study of Volume Shifts and Ionic Concentration Changes during Ischemia and Hypoxia (http://www.sciencedirect.com/science?_ob=ArticleURL&_udi=B6WMD-4789XHH-8&_user=140507&_coverDate=01%2F07%2F2003&_rdoc=8&_fmt=summary&_orig=browse&_srch=%23toc%236932%232003%23997799998%23365817!&_cdi=6932&_sort=d&_docanchor=&wchp=dGLbVzz-lSztz&_acct=C000011498&_version=1&_urlVersion=0&_userid=140507&md5=d49670d50ea95b76f07fd616d782751a), Chung-Seon Yi, Aaron L. Fogelson, James P. Keener, and Charles S. Peskin, 2003, Theoretical Journal of Biology (http://www.sciencedirect.com/science?_ob=JournalURL&_cdi=6932&_auth=y&_acct=C000011498&_version=1&_urlVersion=0&_userid=140507&md5=c8e64d20ff203cda2255f4b6b7affe4f), 220, 83-106. (A PDF version of the article is available to subscribers of the Theoretical Journal of Biology.) PubMed ID: 12453453 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=12453453&dopt=Abstract)
  //
  // schematic diagram
  //
  // A schematic diagram of the Yi et al. 2003 mathematical model. In the tissue damaged by ischemia or hypoxia there are three compartments: an intracellular space within a collection of homogeneous cells; the extracellular space surrounding these cells; and the capillary space serving the cells. In addition there is a fourth compartment which represents the extracellular space of the undamaged tissue. The cell membrane separates the intracellular and extracellular compartments, and the capillary wall separates the extracellular space from the capillary space.
  //
  // cell diagram
  //
  // A schematic diagram describing the ionic components of the Yi et al. 2003 mathematical model. Sodium, chloride and potassium ions are exchanged between the intracellular and extracellular environments through channels and via the sodium-potassium pump. Water is also passed between the various components.
  // Below, we define some additional units for association with variables and
  // constants within the model.
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit micromole as
    unit mole {pref: micro};
  enddef;
  def unit micromole_per_minute as
    unit mole {pref: micro};
    unit minute {expo: -1};
  enddef;
  def unit minute as
    unit second {mult: 60.0};
  enddef;
  def unit flux as
    unit millimolar;
    unit minute {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;
  def unit cm2 as
    unit metre {pref: centi, expo: 2};
  enddef;
  def unit cm3 as
    unit metre {pref: centi, expo: 3};
  enddef;
  def unit cm3_per_minute as
    unit metre {pref: centi, expo: 3};
    unit minute {expo: -1};
  enddef;
  def unit cm3_millimolar_per_minute as
    unit metre {pref: centi, expo: 3};
    unit millimolar;
    unit minute {expo: -1};
  enddef;
  def unit Pa as
    unit pascal;
  enddef;
  def unit cm3_per_Pa_per_minute as
    unit metre {pref: centi, expo: 3};
    unit pascal {expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit milliC_per_volt_per_minute as
    unit coulomb {pref: milli};
    unit volt {expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {pref: milli, expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  def comp intracellular_space as
    var delta: millivolt {pub: out, init: -80.0};
    var delta_eq: millivolt {pub: out, init: -70.0};
    var V_i: cm3 {pub: out, init: 3.80E-8};
    var R: joule_per_mole_kelvin {pub: out, init: 8.314};
    var T: kelvin {pub: out, init: 310.0};
    var F: coulomb_per_millimole {pub: out, init: 96.5};
    var C_m: microF_per_cm2 {pub: out, init: 1.0};
    var Lie_p: cm3_per_Pa_per_minute {pub: out, init: 1.21E12};
    var pi_i: Pa {pub: out};
    var pi_e: Pa {pub: out};
    var P_h: cm3_per_minute {pub: out, init: 6.0E-10};
    var delta_eh: millivolt {pub: out};
    var delta_init: millivolt;
    var delta_i: millivolt;
    var X_i: micromole {init: 3.83E-6};
    var z_i: dimensionless {init: 1.44};
    var A_s: cm2 {init: 7.67E-5};
    var X_e: micromole {pub: in};
    var time: minute {pub: in};
    var Na_e: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var K_e: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Cl_e: millimolar {pub: in};
    var Cl_i: millimolar {pub: in};
    var V_e: cm3 {pub: in};
    var delta_e: millivolt {pub: in};
    ode(V_i, time) = Lie_p*(pi_i-pi_e);
    pi_i = R*T*(Na_i+K_i+Cl_i+X_i/V_i);
    pi_e = R*T*(Na_e+K_e+Cl_e+X_e/V_e);
    delta_init = delta_i-delta_e;
    ode(delta, time) = V_i*F*R*T*(Na_i+K_i-(Cl_i+z_i*X_i/V_i))/(C_m*A_s);
    X_i = V_i*(Na_i+K_i-Cl_i)/z_i;
  enddef;

  def comp intracellular_sodium as
    var Na_i: millimolar {pub: out, init: 11.2};
    var g_Na: milliC_per_volt_per_minute {pub: out};
    var delta_Na: millivolt {pub: out};
    var g_b_Na: milliC_per_volt_per_minute {init: 3.31E-5};
    var g_Na_max: milliC_per_volt_per_minute {init: 3.69E-2};
    var time: minute {pub: in};
    var Na_e: millimolar {pub: in};
    var P: micromole_per_minute {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var delta: millivolt {pub: in, priv: out};
    var delta_eq: millivolt {pub: in, priv: out};
    var m_infinity: dimensionless {priv: in};
    var h_infinity: dimensionless {priv: in};
    ode(Na_i, time) = -(g_Na/F*(delta-delta_Na)+3.0{dimensionless}*P);
    g_Na = g_b_Na+g_Na_max*pow(m_infinity, 3.0{dimensionless})*h_infinity;
    delta_Na = R*T/F*ln(Na_e/Na_i);
  enddef;

  def comp intracellular_sodium_m_gate as
    var m_infinity: dimensionless {pub: out};
    var A_m: first_order_rate_constant;
    var B_m: first_order_rate_constant;
    var delta: millivolt {pub: in};
    var delta_eq: millivolt {pub: in};
    A_m = 0.1{dimensionless}*(25.0{millivolt}-delta+delta_eq)/(exp(0.1{per_millivolt}*(25.0{millivolt}-delta+delta_eq))-1.0{dimensionless});
    B_m = 4.0{first_order_rate_constant}*exp((-delta+delta_eq)/18.0{millivolt});
    m_infinity = A_m/(A_m+B_m);
  enddef;

  def comp intracellular_sodium_h_gate as
    var h_infinity: dimensionless {pub: out};
    var A_h: first_order_rate_constant;
    var B_h: first_order_rate_constant;
    var delta: millivolt {pub: in};
    var delta_eq: millivolt {pub: in};
    A_h = 0.07{first_order_rate_constant}*exp(0.05{per_millivolt}*(-delta+delta_eq));
    B_h = 1.0{first_order_rate_constant}/(exp(0.1{dimensionless}*(30.0{millivolt}-delta+delta_eq))+1.0{dimensionless});
    h_infinity = A_h/(A_h+B_h);
  enddef;

  def comp intracellular_potassium as
    var K_i: millimolar {pub: out, init: 139.0};
    var g_K: milliC_per_volt_per_minute {pub: out};
    var delta_K: millivolt {pub: out};
    var g_b_K: milliC_per_volt_per_minute {init: 8.33E-4};
    var g_K_max: milliC_per_volt_per_minute {init: 1.28E-2};
    var time: minute {pub: in};
    var K_e: millimolar {pub: in};
    var P: micromole_per_minute {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var delta: millivolt {pub: in, priv: out};
    var delta_eq: millivolt {pub: in, priv: out};
    var n_infinity: dimensionless {priv: in};
    ode(K_i, time) = -(g_K/F*(delta-delta_K)-2.0{dimensionless}*P);
    g_K = g_b_K+g_K_max*pow(n_infinity, 4.0{dimensionless});
    delta_K = R*T/F*ln(K_e/K_i);
  enddef;

  def comp intracellular_potassium_n_gate as
    var n_infinity: dimensionless {pub: out};
    var A_n: first_order_rate_constant;
    var B_n: first_order_rate_constant;
    var delta: millivolt {pub: in};
    var delta_eq: millivolt {pub: in};
    A_n = 0.01{dimensionless}*(10.0{millivolt}-delta+delta_eq)/(exp(0.1{per_millivolt}*(10.0{millivolt}-delta+delta_eq))-1.0{dimensionless});
    B_n = 0.125{first_order_rate_constant}*exp((-delta+delta_eq)/80.0{millivolt});
    n_infinity = A_n/(A_n+B_n);
  enddef;

  def comp intracellular_chloride as
    var Cl_i: millimolar {pub: out, init: 4.95};
    var g_Cl: milliC_per_volt_per_minute {pub: out, init: 2.81E-4};
    var delta_Cl: millivolt {pub: out};
    var time: minute {pub: in};
    var Cl_e: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var delta: millivolt {pub: in};
    ode(Cl_i, time) = g_Cl/F*(delta+delta_Cl);
    delta_Cl = R*T/(-1.0{dimensionless}*F)*ln(Cl_e/Cl_i);
  enddef;

  def comp extracellular_sodium as
    var Na_e: millimolar {pub: out, init: 140.0};
    var delta_Na: millivolt {pub: in};
    var time: minute {pub: in};
    var g_Na: milliC_per_volt_per_minute {pub: in};
    var P: micromole_per_minute {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var delta: millivolt {pub: in};
    var Jv_Na: cm3_millimolar_per_minute {pub: in};
    var Jh_Na: cm3_millimolar_per_minute {pub: in};
    ode(Na_e, time) = g_Na/F*(delta-delta_Na)+3.0{dimensionless}*P-(Jv_Na+Jh_Na);
  enddef;

  def comp extracellular_potassium as
    var K_e: millimolar {pub: out, init: 5.4};
    var g_K: milliC_per_volt_per_minute {pub: in};
    var delta_K: millivolt {pub: in};
    var time: minute {pub: in};
    var P: micromole_per_minute {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var delta: millivolt {pub: in};
    var Jv_K: cm3_millimolar_per_minute {pub: in};
    var Jh_K: cm3_millimolar_per_minute {pub: in};
    ode(K_e, time) = g_K/F*(delta-delta_K)-2.0{dimensionless}*P-(Jv_K+Jh_K);
  enddef;

  def comp extracellular_chloride as
    var Cl_e: millimolar {pub: out, init: 110.0};
    var g_Cl: milliC_per_volt_per_minute {pub: in};
    var delta_Cl: millivolt {pub: in};
    var time: minute {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var delta: millivolt {pub: in};
    var Jv_Cl: cm3_millimolar_per_minute {pub: in};
    var Jh_Cl: cm3_millimolar_per_minute {pub: in};
    ode(Cl_e, time) = -(g_Cl/F*(delta+delta_Cl))-(Jv_Cl+Jh_Cl);
  enddef;

  def comp extracellular_space as
    var V_e: cm3 {pub: out, init: 9.50E-9};
    var delta_e: millivolt {pub: out};
    var X_e: micromole {pub: out, init: 3.94E-9};
    var z_e: dimensionless {init: 85.4};
    var Lie_p: cm3_per_Pa_per_minute {pub: in};
    var pi_i: Pa {pub: in};
    var pi_e: Pa {pub: in};
    var time: minute {pub: in};
    var Jv_H2O: cm3_per_minute {pub: in};
    var Jh_H2O: cm3_per_minute {pub: in};
    var Cl_e: millimolar {pub: in};
    var Na_e: millimolar {pub: in};
    var K_e: millimolar {pub: in};
    ode(V_e, time) = Lie_p*(pi_e-pi_i)-(Jv_H2O+Jh_H2O);
    X_e = V_e*(Na_e+K_e-Cl_e)/z_e;
  enddef;

  def comp water_flux as
    var Jh_H2O: cm3_per_minute {pub: out, init: 0.0};
    var V_infinity_e: cm3;
    var V_infinity_T: cm3;
    var tau_1: minute {init: 3.3};
    var tau_2: minute {init: 33.0};
    var V_i: cm3 {pub: in};
    var V_e: cm3 {pub: in};
    var time: minute {pub: in};
    Jh_H2O = -(1.0{dimensionless}/tau_1*(V_infinity_e-V_e)+1.0{dimensionless}/tau_2*(V_infinity_T-(V_i+V_e)));
  enddef;

  def comp sodium_flux as
    var Jh_Na: cm3_millimolar_per_minute {pub: out, init: 0.0};
    var Na_infinity_e: millimolar;
    var alpha_Na: dimensionless;
    var Na_e: millimolar {pub: in};
    var delta_eh: millivolt {pub: in};
    var time: minute {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var P_h: cm3_per_minute {pub: in};
    var Jh_H2O: cm3_per_minute {pub: in};
    Jh_Na = P_h*alpha_Na*((Na_infinity_e-Na_e*exp(alpha_Na))/(1.0{dimensionless}-exp(alpha_Na)));
    alpha_Na = Jh_H2O/P_h-1.0{dimensionless}*F/(R*T*delta_eh);
  enddef;

  def comp potassium_flux as
    var Jh_K: cm3_millimolar_per_minute {pub: out, init: 0.0};
    var K_infinity_e: millimolar;
    var alpha_K: dimensionless;
    var K_e: millimolar {pub: in};
    var delta_eh: millivolt {pub: in};
    var time: minute {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var P_h: cm3_per_minute {pub: in};
    var Jh_H2O: cm3_per_minute {pub: in};
    Jh_K = P_h*alpha_K*((K_infinity_e-K_e*exp(alpha_K))/(1.0{dimensionless}-exp(alpha_K)));
    alpha_K = Jh_H2O/P_h-1.0{dimensionless}*F/(R*T*delta_eh);
  enddef;

  def comp chloride_flux as
    var Jh_Cl: cm3_millimolar_per_minute {pub: out, init: 0.0};
    var Cl_infinity_e: millimolar;
    var alpha_Cl: dimensionless;
    var Cl_e: millimolar {pub: in};
    var delta_eh: millivolt {pub: in};
    var time: minute {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var P_h: cm3_per_minute {pub: in};
    var Jh_H2O: cm3_per_minute {pub: in};
    Jh_Cl = P_h*alpha_Cl*((Cl_infinity_e-Cl_e*exp(alpha_Cl))/(1.0{dimensionless}-exp(alpha_Cl)));
    alpha_Cl = Jh_H2O/P_h-(-1.0{dimensionless}*F/(R*T*delta_eh));
  enddef;

  def comp capillary_compartment_sodium as
    var Na_v: millimolar {pub: out, init: 136.7};
    var delta_ev_Na: millivolt {pub: out};
    var Jv_Na: cm3_millimolar_per_minute {pub: out, init: 0.0};
    var time: minute {pub: in};
    var Na_a: millimolar {pub: in};
    var Na_e: millimolar {pub: in};
    var Qv: cm3_per_minute {pub: in};
    var Qa: cm3_per_minute {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    Na_v = (Qa*Na_a+Jv_Na)/Qv;
    delta_ev_Na = R*T/F*ln(Na_v/Na_e);
    Jv_Na = Qv*Na_v-Qa*Na_a;
  enddef;

  def comp capillary_compartment_potassium as
    var K_v: millimolar {pub: out, init: 5.27};
    var delta_ev_K: millivolt {pub: out};
    var Jv_K: cm3_millimolar_per_minute {pub: out, init: 0.0};
    var time: minute {pub: in};
    var K_a: millimolar {pub: in};
    var K_e: millimolar {pub: in};
    var Qv: cm3_per_minute {pub: in};
    var Qa: cm3_per_minute {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    K_v = (Qa*K_a+Jv_K)/Qv;
    delta_ev_K = R*T/F*ln(K_v/K_e);
    Jv_K = Qv*K_v-Qa*K_a;
  enddef;

  def comp capillary_compartment_chloride as
    var Cl_v: millimolar {pub: out, init: 112.7};
    var delta_ev_Cl: millivolt {pub: out};
    var Jv_Cl: cm3_millimolar_per_minute {pub: out, init: 0.0};
    var time: minute {pub: in};
    var Cl_a: millimolar {pub: in};
    var Cl_e: millimolar {pub: in};
    var Qv: cm3_per_minute {pub: in};
    var Qa: cm3_per_minute {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    Cl_v = (Qa*Cl_a+Jv_Cl)/Qv;
    delta_ev_Cl = R*T/F*ln(Cl_v/Cl_e);
    Jv_Cl = Qv*Cl_v-Qa*Cl_a;
  enddef;

  def comp capillary_space as
    var pi_v: Pa {pub: out};
    var Qv: cm3_per_minute {pub: out, init: 3.6E-8};
    var Pr_v: millimolar {pub: out, init: 1.45};
    var Jv_H2O: cm3_per_minute {pub: out};
    var z_v: dimensionless {init: 24.4};
    var Qa: cm3_per_minute {pub: in};
    var Na_v: millimolar {pub: in};
    var K_v: millimolar {pub: in};
    var Cl_v: millimolar {pub: in};
    var pi_e: Pa {pub: in};
    var time: minute {pub: in};
    Qv = Qa+Jv_H2O;
    Jv_H2O = Qv-Qa;
    pi_v = Na_v+K_v+Cl_v+Pr_v;
    Pr_v = (Na_v+K_v+(-Cl_v))/z_v;
  enddef;

  def comp arterial_space as
    var Qa: cm3_per_minute {pub: out, init: 3.6E-8};
    var Na_a: millimolar {pub: out, init: 140.0};
    var K_a: millimolar {pub: out, init: 5.4};
    var Cl_a: millimolar {pub: out, init: 110.0};
    var Pr_a: millimolar {init: 1.45};
    var time: minute {pub: in};
    var Pr_v: millimolar {pub: in};
    var Qv: cm3_per_minute {pub: in};
    Qa = Qv*Pr_v/Pr_a;
  enddef;

  def comp pump_rate as
    var P: micromole_per_minute {pub: out};
    var P_max: micromole_per_minute {init: 4.6E-8};
    var Km_Na_i: millimolar {init: 10.0};
    var Km_K_e: millimolar {init: 1.5};
    var f_NaK: dimensionless;
    var a_t: dimensionless;
    var time: minute {pub: in};
    var K_e: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_e: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var delta: millivolt {pub: in};
    P = a_t*P_max*f_NaK*(1.0{dimensionless}/(1.0{dimensionless}+pow(Km_Na_i/Na_i, 1.5{dimensionless})))*(K_e/(Km_K_e+K_e));
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*delta*F/(R*T))+0.0365{dimensionless}*7.0{dimensionless}*exp(-0.1{dimensionless}*delta*F/(R*T))*exp(Na_e/67.3{millimolar})-1.0{dimensionless});
    a_t = pow(0.35{dimensionless}, time/15.0{minute});
  enddef;

  def group as encapsulation for
    comp intracellular_sodium incl
      comp intracellular_sodium_m_gate;
      comp intracellular_sodium_h_gate;
    endcomp;
    comp intracellular_potassium incl
      comp intracellular_potassium_n_gate;
    endcomp;
  enddef;
  def map between intracellular_space and environment for
    vars time and time;
  enddef;
  def map between intracellular_sodium and environment for
    vars time and time;
  enddef;
  def map between intracellular_potassium and environment for
    vars time and time;
  enddef;
  def map between intracellular_chloride and environment for
    vars time and time;
  enddef;
  def map between extracellular_sodium and environment for
    vars time and time;
  enddef;
  def map between extracellular_potassium and environment for
    vars time and time;
  enddef;
  def map between extracellular_chloride and environment for
    vars time and time;
  enddef;
  def map between extracellular_space and environment for
    vars time and time;
  enddef;
  def map between water_flux and environment for
    vars time and time;
  enddef;
  def map between sodium_flux and environment for
    vars time and time;
  enddef;
  def map between potassium_flux and environment for
    vars time and time;
  enddef;
  def map between chloride_flux and environment for
    vars time and time;
  enddef;
  def map between capillary_compartment_sodium and environment for
    vars time and time;
  enddef;
  def map between capillary_compartment_potassium and environment for
    vars time and time;
  enddef;
  def map between capillary_compartment_chloride and environment for
    vars time and time;
  enddef;
  def map between capillary_space and environment for
    vars time and time;
  enddef;
  def map between arterial_space and environment for
    vars time and time;
  enddef;
  def map between pump_rate and environment for
    vars time and time;
  enddef;
  def map between intracellular_space and intracellular_sodium for
    vars Na_i and Na_i;
    vars R and R;
    vars T and T;
    vars F and F;
    vars delta and delta;
    vars delta_eq and delta_eq;
  enddef;
  def map between intracellular_space and intracellular_potassium for
    vars K_i and K_i;
    vars R and R;
    vars T and T;
    vars F and F;
    vars delta and delta;
    vars delta_eq and delta_eq;
  enddef;
  def map between intracellular_space and intracellular_chloride for
    vars Cl_i and Cl_i;
    vars R and R;
    vars T and T;
    vars F and F;
    vars delta and delta;
  enddef;
  def map between intracellular_space and extracellular_sodium for
    vars Na_e and Na_e;
    vars R and R;
    vars T and T;
    vars F and F;
    vars delta and delta;
  enddef;
  def map between intracellular_space and extracellular_potassium for
    vars K_e and K_e;
    vars R and R;
    vars T and T;
    vars F and F;
    vars delta and delta;
  enddef;
  def map between intracellular_space and extracellular_chloride for
    vars Cl_e and Cl_e;
    vars R and R;
    vars T and T;
    vars F and F;
    vars delta and delta;
  enddef;
  def map between intracellular_space and extracellular_space for
    vars X_e and X_e;
    vars V_e and V_e;
    vars pi_e and pi_e;
    vars pi_i and pi_i;
    vars Lie_p and Lie_p;
    vars delta_e and delta_e;
  enddef;
  def map between intracellular_space and water_flux for
    vars V_i and V_i;
  enddef;
  def map between intracellular_space and sodium_flux for
    vars R and R;
    vars T and T;
    vars F and F;
    vars P_h and P_h;
    vars delta_eh and delta_eh;
  enddef;
  def map between intracellular_space and potassium_flux for
    vars R and R;
    vars T and T;
    vars F and F;
    vars P_h and P_h;
    vars delta_eh and delta_eh;
  enddef;
  def map between intracellular_space and chloride_flux for
    vars R and R;
    vars T and T;
    vars F and F;
    vars P_h and P_h;
    vars delta_eh and delta_eh;
  enddef;
  def map between intracellular_space and capillary_compartment_sodium for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between intracellular_space and capillary_compartment_potassium for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between intracellular_space and capillary_compartment_chloride for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between intracellular_space and capillary_space for
    vars pi_e and pi_e;
  enddef;
  def map between intracellular_space and pump_rate for
    vars R and R;
    vars T and T;
    vars F and F;
    vars delta and delta;
  enddef;
  def map between intracellular_sodium and extracellular_sodium for
    vars Na_e and Na_e;
    vars g_Na and g_Na;
    vars delta_Na and delta_Na;
  enddef;
  def map between intracellular_sodium and pump_rate for
    vars Na_i and Na_i;
    vars P and P;
  enddef;
  def map between intracellular_potassium and pump_rate for
    vars P and P;
  enddef;
  def map between intracellular_potassium and extracellular_potassium for
    vars K_e and K_e;
    vars g_K and g_K;
    vars delta_K and delta_K;
  enddef;
  def map between intracellular_chloride and extracellular_chloride for
    vars Cl_e and Cl_e;
    vars g_Cl and g_Cl;
    vars delta_Cl and delta_Cl;
  enddef;
  def map between extracellular_sodium and sodium_flux for
    vars Na_e and Na_e;
    vars Jh_Na and Jh_Na;
  enddef;
  def map between extracellular_sodium and capillary_compartment_sodium for
    vars Na_e and Na_e;
    vars Jv_Na and Jv_Na;
  enddef;
  def map between extracellular_sodium and pump_rate for
    vars Na_e and Na_e;
    vars P and P;
  enddef;
  def map between extracellular_potassium and potassium_flux for
    vars K_e and K_e;
    vars Jh_K and Jh_K;
  enddef;
  def map between extracellular_potassium and capillary_compartment_potassium for
    vars K_e and K_e;
    vars Jv_K and Jv_K;
  enddef;
  def map between extracellular_potassium and pump_rate for
    vars K_e and K_e;
    vars P and P;
  enddef;
  def map between extracellular_chloride and chloride_flux for
    vars Cl_e and Cl_e;
    vars Jh_Cl and Jh_Cl;
  enddef;
  def map between extracellular_chloride and extracellular_space for
    vars Cl_e and Cl_e;
  enddef;
  def map between extracellular_potassium and extracellular_space for
    vars K_e and K_e;
  enddef;
  def map between extracellular_sodium and extracellular_space for
    vars Na_e and Na_e;
  enddef;
  def map between extracellular_chloride and capillary_compartment_chloride for
    vars Cl_e and Cl_e;
    vars Jv_Cl and Jv_Cl;
  enddef;
  def map between extracellular_space and water_flux for
    vars V_e and V_e;
    vars Jh_H2O and Jh_H2O;
  enddef;
  def map between extracellular_space and capillary_space for
    vars Jv_H2O and Jv_H2O;
  enddef;
  def map between water_flux and sodium_flux for
    vars Jh_H2O and Jh_H2O;
  enddef;
  def map between water_flux and potassium_flux for
    vars Jh_H2O and Jh_H2O;
  enddef;
  def map between water_flux and chloride_flux for
    vars Jh_H2O and Jh_H2O;
  enddef;
  def map between capillary_compartment_sodium and arterial_space for
    vars Na_a and Na_a;
    vars Qa and Qa;
  enddef;
  def map between capillary_compartment_sodium and capillary_space for
    vars Na_v and Na_v;
    vars Qv and Qv;
  enddef;
  def map between capillary_compartment_potassium and arterial_space for
    vars K_a and K_a;
    vars Qa and Qa;
  enddef;
  def map between capillary_compartment_potassium and capillary_space for
    vars K_v and K_v;
    vars Qv and Qv;
  enddef;
  def map between capillary_compartment_chloride and arterial_space for
    vars Cl_a and Cl_a;
    vars Qa and Qa;
  enddef;
  def map between capillary_compartment_chloride and capillary_space for
    vars Cl_v and Cl_v;
    vars Qv and Qv;
  enddef;
  def map between capillary_space and arterial_space for
    vars Qv and Qv;
    vars Qa and Qa;
    vars Pr_v and Pr_v;
  enddef;
  def map between intracellular_sodium and intracellular_sodium_m_gate for
    vars m_infinity and m_infinity;
    vars delta and delta;
    vars delta_eq and delta_eq;
  enddef;
  def map between intracellular_sodium and intracellular_sodium_h_gate for
    vars h_infinity and h_infinity;
    vars delta and delta;
    vars delta_eq and delta_eq;
  enddef;
  def map between intracellular_potassium and intracellular_potassium_n_gate for
    vars n_infinity and n_infinity;
    vars delta and delta;
    vars delta_eq and delta_eq;
  enddef;
enddef;
