// creator: Family Terkildsen; Given Jonna; j.terkildsen@auckland.ac.nz; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2008-04-03
// publisher: The University of Auckland, Auckland Bioengineering Institute
// This is the CellML 1.0 Guyton Model.
// reference: Family Guyton; Family Cardiovascular; Family Circulation; title Description of Guyton 1992 Full Cardiovascular Circulation Model; W3CDTF 2008-00-00 00:00
// reference: subject_type keyword; physiology; organ systems; cardiovascular circulation; Guyton
// solverHint: initialValue 163.508; degree 0; variable #delivery_of_O2_to_NM_tissues_DOB
// solverHint: initialValue 0.694163; degree 0; variable #NM_venous_O2_content_OSV
// solverHint: initialValue 37.6; degree 0; variable #NM_venous_O2_content_POV
// solverHint: initialValue 56.8057; degree 0; variable #delivery_of_O2_to_M_tissues_RMO
// solverHint: initialValue 39.9793; degree 0; variable #M_venous_O2_content_PVO
// solverHint: initialValue 0.699673; degree 0; variable #M_venous_O2_content_OVS
// solverHint: initialValue 1.00071; degree 0; variable #renal_autoregulatory_feedback_factor_RNAUG2
// solverHint: initialValue 1.00071; degree 0; variable #renal_autoregulatory_feedback_factor_RNAUG1
// solverHint: initialValue 1.00071; degree 0; variable #renal_autoregulatory_feedback_factor_RNAUG1T
// solverHint: initialValue 40.0; degree 0; variable #AAR_calculation_AAR1
// solverHint: initialValue 40.0; degree 0; variable #atrial_natriuretic_peptide_effect_on_AAR_AAR
// solverHint: initialValue 40.0; degree 0; variable #atrial_natriuretic_peptide_effect_on_AAR_AART
// solverHint: initialValue 0.6; degree 0; variable #effect_of_renal_autoregulatory_feedback_on_EAR_RNAUG4
// solverHint: initialValue 42.4737; degree 0; variable #EAR_calculation_EAR
// solverHint: initialValue 42.4737; degree 0; variable #EAR_calculation_EAR1
// solverHint: initialValue 84.8171; degree 0; variable #total_renal_resistance_RR
// solverHint: initialValue 1.22057; degree 0; variable #normal_renal_blood_flow_RFN
// solverHint: initialValue 37.8383; degree 0; variable #glomerular_colloid_osmotic_pressure_GLPC
// solverHint: initialValue 1.20569; degree 0; variable #glomerular_colloid_osmotic_pressure_EFAFPR
// solverHint: initialValue 1.20569; degree 0; variable #glomerular_colloid_osmotic_pressure_EFAFPR1
// solverHint: initialValue 47.88; degree 0; variable #glomerular_pressure_APD
// solverHint: initialValue 51.842; degree 0; variable #glomerular_pressure_GLP
// solverHint: initialValue 0.125006; degree 0; variable #glomerular_filtration_rate_GFN
// solverHint: initialValue 0.125006; degree 0; variable #glomerular_filtration_rate_GFN1
// solverHint: initialValue 6.00368; degree 0; variable #glomerular_filtration_rate_PFL
// solverHint: initialValue 1.00005; degree 0; variable #proximal_tubular_and_macula_densa_flow_PTFL
// solverHint: initialValue 1.00051; degree 0; variable #proximal_tubular_and_macula_densa_flow_MDFLWT
// solverHint: initialValue 1.00051; degree 0; variable #proximal_tubular_and_macula_densa_flow_MDFLW
// solverHint: initialValue 0.00852183; degree 0; variable #right_atrial_pressure_PRA
// solverHint: initialValue 103.525; degree 0; variable #arterial_pressure_and_pressure_gradient_PA
// solverHint: initialValue 2.77751; degree 0; variable #venous_resistance_RVS
// solverHint: initialValue 2.79521; degree 0; variable #blood_flow_through_NM_NR_tissues_BFN
// solverHint: initialValue 3.71612; degree 0; variable #venous_average_pressure_PVS
// solverHint: initialValue 16.9144; degree 0; variable #capillary_pressure_PC
// solverHint: initialValue 1; degree 0; variable #volume_effect_on_arteries_ATRRFB
// solverHint: initialValue 0; degree 0; variable #volume_effect_on_unstressed_venous_volume_ATRVFB
// solverHint: initialValue 0.743224; degree 0; variable #venous_excess_volume_VVE
// solverHint: initialValue 3.28246; degree 0; variable #venous_blood_volume_VVS
// solverHint: initialValue 0.862514; degree 0; variable #arterial_blood_volume_VAS
// solverHint: initialValue 0.379883; degree 0; variable #left_atrial_blood_volume_VLA
// solverHint: initialValue 0.38131; degree 0; variable #pulmonary_vasculature_blood_volume_VPA
// solverHint: initialValue 0.100043; degree 0; variable #right_atrial_blood_volume_VRA
// solverHint: initialValue -0.00184824; degree 0; variable #total_blood_volume_change_VBD
// solverHint: initialValue 4.26092e-5; degree 0; variable #right_atrial_pressure_VRE
// solverHint: initialValue 0.743224; degree 0; variable #venous_excess_volume_VVE1
// solverHint: initialValue 3.71612; degree 0; variable #venous_average_pressure_PVS1
// solverHint: initialValue 0.36019; degree 0; variable #venous_resistance_CN3
// solverHint: initialValue 2.77632; degree 0; variable #venous_resistance_RV1
// solverHint: initialValue 4.971743; degree 0; variable #NM_NR_venous_resistance_NNRVR
// solverHint: initialValue 0.367514; degree 0; variable #arterial_pressure_and_pressure_gradient_VAE
// solverHint: initialValue 1.07174; degree 0; variable #pressure_effect_on_arterial_distention_PAM
// solverHint: initialValue 0.864676; degree 0; variable #non_renal_systemic_arterial_resistance_multiplier_R1
// solverHint: initialValue 30.73545; degree 0; variable #NM_NR_arterial_resistance_NNRAR
// solverHint: initialValue 99.8089; degree 0; variable #pressure_gradient_from_arteries_to_veins_PGS
// solverHint: initialValue 35.7072; degree 0; variable #total_NM_NR_systemic_resistance_RSN
// solverHint: initialValue 0.204582; degree 0; variable #effect_of_pressure_on_volume_receptors_AHZ
// solverHint: initialValue 0.204582; degree 0; variable #effect_of_pressure_on_volume_receptors_AHZ1
// solverHint: initialValue -0.01947; degree 0; variable #total_volume_nervous_feedback_AH7
// solverHint: initialValue 103.525; degree 0; variable #perfusion_pressure_PAR
def model Guyton_Model as
  // ========================================	DOCUMENTATION	=============================================
  // Guyton Model
  //
  // Jonna Terkildsen
  //
  // Auckland Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model has not been completely validated as yet. The output from the model may not conform to the results from the MODSIM program. Due to the differences between procedural code (in this case C-code) and declarative languages (CellML), some aspects of the original model were not able to be encapsulated by the CellML model (such as the damping of variables). Work is underway to fix these omissions and validate the CellML model. We also anticipate that many of these problems will be fixed when the CellML 1.0 models are combined in a CellML 1.1 format.
  //
  // This CellML model has been validated. Due to the differences between procedural code (in this case C-code) and declarative languages (CellML), some aspects of the original model were not able to be encapsulated by the CellML model (such as the damping of variables). This may effect the transient behaviour of the model, however the steady-state behaviour would remain the same. The equations in this file and the steady-state output from the model conform to the results from the MODSIM program.
  //
  // Model Structure
  //
  // Arthur Guyton (1919-2003) was an American physiologist who became famous for his 1950s experiments in which he studied the physiology of cardiac output and its relationship with the peripheral circulation. The results of these experiments challenged the conventional wisdom that it was the heart itself that controlled cardiac output. Instead Guyton demonstrated that it was the need of the body tissues for oxygen which was the real regulator of cardiac output. The "Guyton Curves" describe the relationship between right atrial pressures and cardiac output, and they form a foundation for understanding the physiology of circulation.
  //
  // The Guyton model of fluid, electrolyte, and circulatory regulation is an extensive mathematical model of human circulatory physiology, capable of simulating a variety of experimental conditions, and contains a number of linked subsystems relating to circulation and its neuroendocrine control.
  //
  // This is a CellML translation of the Guyton model of the regulation of the circulatory system. The complete model consists of separate modules each of which characterise a separate physiological subsystems. The Circulation Dynamics is the primary system, to which other modules/blocks are connected. The other modules characterise the dynamics of the kidney, electrolytes and cell water, thirst and drinking, hormone regulation, autonomic regulation, cardiovascular system etc, and these feedback on the central circulation model. The CellML code in these modules is based on the C code from the programme C-MODSIM created by Dr Jean-Pierre Montani.
  //
  // model diagram
  //
  // A systems analysis diagram for the full Guyton model describing circulation regulation.
  //
  // <informalfigure float="0" id="guyton_diagram"> <mediaobject> <imageobject> <objectinfo> <title>model diagram</title> </objectinfo> <imagedata fileref=".png"/> </imageobject> </mediaobject> <caption>A schematic diagram of the components and processes described in the current CellML model.</caption> </informalfigure>
  //
  // There are several publications referring to the Guyton model. One of these papers is cited below:
  //
  // Circulation: Overall Regulation, A.C. Guyton, T.G. Coleman, and H.J. Granger, 1972, Annual Review of Physiology , 34, 13-44. PubMed ID: 4334846 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=4334846&query_hl=1&itool=pubmed_docsum)
  // The following RDF block contains metadata that applies to this document
  // as a whole, as indicated by the empty about attribute on the
  // <rdf:Description> element.
  // The Model Builder Metadata.  The Dublin Core "creator" element is used
  // to indicate the person who translated the model into CellML.
  // The Creation Date metadata. This is the date on which the model
  // was translated into CellML.
  // The Modification History metadata. This lists the changes that have been
  // made to the document, who made the changes, and when they were made.
  // The Publisher metadata.
  // =======================================================    CITATION AND KEYWORD METADATA    ==================================================
  // ========================================	UNITS	=============================================
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit per_minute as
    unit minute {expo: -1};
  enddef;
  def unit beats_per_minute as
    unit minute {expo: -1};
  enddef;
  def unit beats_per_minute_per_mmHg as
    unit minute {expo: -1};
    unit mmHg {expo: -1};
  enddef;
  def unit minute_per_L as
    unit minute;
    unit litre {expo: -1};
  enddef;
  def unit mmHg as
    unit newton {mult: 133.322};
    unit metre {expo: -2};
  enddef;
  def unit per_mmHg as
    unit mmHg {expo: -1};
  enddef;
  def unit mmHg_per_mL as
    unit mmHg;
    unit mL {expo: -1};
  enddef;
  def unit mmHg_L as
    unit mmHg;
    unit litre;
  enddef;
  def unit per_mmHg2 as
    unit mmHg {expo: -2};
  enddef;
  def unit mmHg3 as
    unit mmHg {expo: 3};
  enddef;
  def unit monovalent_mEq as
    unit mole {pref: milli};
  enddef;
  def unit monovalent_mEq_per_minute as
    unit mole {pref: milli};
    unit minute {expo: -1};
  enddef;
  def unit monovalent_mEq_per_litre as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mOsm as
    unit mole {pref: milli};
  enddef;
  def unit mOsm_per_litre as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mOsm_per_minute as
    unit mole {pref: milli};
    unit minute {expo: -1};
  enddef;
  def unit monovalent_mEq_per_litre_per_minute as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit litre2_per_monovalent_mEq_per_minute as
    unit litre {expo: 2};
    unit mole {pref: milli, expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit L_per_minute as
    unit litre;
    unit minute {expo: -1};
  enddef;
  def unit per_mmHg_per_minute as
    unit mmHg {expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit gram_per_L as
    unit gram;
    unit litre {expo: -1};
  enddef;
  def unit L_mmHg_per_gram as
    unit litre;
    unit mmHg;
    unit gram {expo: -1};
  enddef;
  def unit L2_mmHg_per_gram2 as
    unit litre {expo: 2};
    unit mmHg;
    unit gram {expo: -2};
  enddef;
  def unit mmHg_minute_per_L as
    unit minute;
    unit mmHg;
    unit litre {expo: -1};
  enddef;
  def unit mmHg_L_per_minute as
    unit litre;
    unit mmHg;
    unit minute {expo: -1};
  enddef;
  def unit gram_per_minute as
    unit gram;
    unit minute {expo: -1};
  enddef;
  def unit mL_per_L as
    unit litre {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mL_per_L_per_mmHg as
    unit litre {pref: milli};
    unit litre {expo: -1};
    unit mmHg {expo: -1};
  enddef;
  def unit mL_per_L_per_minute as
    unit litre {pref: milli};
    unit litre {expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit mL_per_minute_per_mmHg as
    unit litre {pref: milli};
    unit minute {expo: -1};
    unit mmHg {expo: -1};
  enddef;
  def unit L_mL_per_minute_per_mmHg as
    unit litre;
    unit litre {pref: milli};
    unit minute {expo: -1};
    unit mmHg {expo: -1};
  enddef;
  def unit L_per_mL as
    unit litre {pref: milli, expo: -1};
    unit litre;
  enddef;
  def unit L_per_mmHg as
    unit mmHg {expo: -1};
    unit litre;
  enddef;
  def unit mL_per_minute as
    unit mL;
    unit minute {expo: -1};
  enddef;
  def unit L_per_minute_per_mmHg as
    unit litre;
    unit minute {expo: -1};
    unit mmHg {expo: -1};
  enddef;
  def unit L_per_minute_per_mmHg2 as
    unit litre;
    unit minute {expo: -1};
    unit mmHg {expo: -2};
  enddef;
  // ========================================	ENVIRONMENT COMPONENT	=============================================

  def comp environment as
    var time: minute {priv: none, pub: out};
  enddef;
  // ========================================	INITIAL_GUESSES	=============================================
  // ========================================	TEMP MYOGRS AND PAMK	=============================================

  // Temp component setting MYOGRS, PAMKRN and PAMK to 1.
  def comp temp_myogrs_and_pamk as
    // Outputs to other components
    var MYOGRS: dimensionless {init: 1.0, priv: none, pub: out};
    var PAMK: dimensionless {init: 1.0, priv: none, pub: out};
    var PAMKRN: dimensionless {init: 1.0, priv: none, pub: out};
  enddef;
  // ========================================================	ALDOSTERONE MODEL	===========================================================

  // value: ALDOSTERONE AND ITS FEEDBACK CONTROL FUNCTIONS FOR MODIFICATION OF THE CIRCULATION Two inputs are used for controlling aldosterone secretion, the potassium concentration in the extracellular fluids (CKE) and the effect of angiotensin (ANM) on aldosterone secretion. In turn, multiplier effects for aldosterone control of potassium (AMK) and sodium (AMNA) transport through cell membranes, especially through the kidney tubule membranes are calculated. Encapsulation grouping component containing all the components in the Aldosterone Model. The inputs and outputs of the Aldosterone Model must be passed by this component.
  def comp aldosterone as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var ANM: dimensionless {priv: out, pub: in};
    var CKE: monovalent_mEq_per_litre {priv: out, pub: in};
    // Outputs to components in other models
    var AMK: dimensionless {priv: in, pub: out};
    var AMNA: dimensionless {priv: in, pub: out};
  enddef;
  // ALDOSTERONE OUTPUT CONNECTIONS
  def map between aldosterone and aldosterone_effect_on_cell_membrane_K_transport for
    vars AMK and AMK;
  enddef;
  def map between aldosterone and aldosterone_effect_on_cell_membrane_Na_transport for
    vars AMNA and AMNA;
  enddef;
  // ========================================	ANGIOTENSIN CONTOL OF ALDOSTERONE SECRETION	=============================================

  // value: AL1, AL2, and AL3: Calculation of the partial effect of angiotensin on aldosterone secretion (ANMAL) based on the general angiotensin multiplier (ANM). The sensitivity of this effect is controlled by the sensitivity control variable (ANMALD) in Block AL2.
  def comp angiotensin_control_of_aldosterone_secretion as
    // Inputs from other components
    var ANM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ANMAL: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ANMALD: dimensionless {priv: none, pub: in};
    // value: AL1, AL2, and AL3: Calculation of the partial effect of angiotensin on aldosterone secretion (ANMAL) based on the general angiotensin multiplier (ANM). The sensitivity of this effect is controlled by the sensitivity control variable (ANMALD) in Block AL2.
    ANMAL = (ANM-1{dimensionless})*ANMALD+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between angiotensin_control_of_aldosterone_secretion and aldosterone for
    vars ANM and ANM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between angiotensin_control_of_aldosterone_secretion and aldosterone_parameter_values for
    vars ANMALD and ANMALD;
  enddef;
  // ========================================	OSMOTIC CONTROL OF ALDOSTERONE SECRETION	=============================================

  // value: AL4: Calculation of the driving force of potassium extracellular fluid concentration (CKE) on aldosterone secretion by subtracting the constant 3.3 from CKE.
  def comp osmotic_control_of_aldosterone_secretion as
    // Inputs from other components
    var CKE: monovalent_mEq_per_litre {priv: none, pub: in};
    // Outputs to other components
    var OSMAL: dimensionless {priv: none, pub: out};
    // value: AL4: Calculation of the driving force of potassium extracellular fluid concentration (CKE) on aldosterone secretion by subtracting the constant 3.3 from CKE.
    OSMAL = (CKE-3.3{monovalent_mEq_per_litre})/1.0{monovalent_mEq_per_litre};
  enddef;
  // INPUT CONNECTIONS
  def map between osmotic_control_of_aldosterone_secretion and aldosterone for
    vars CKE and CKE;
  enddef;
  // ========================================	ALDOSTERONE SECRETION	=============================================

  // value: AL5: Calculation of the basic rate of secretion of aldosterone (AMRBSC) by multiplying the potassium drive for secretion from Block AL4 times the angiotensin drive for aldosterone secretion (ANMAL). AL6, AL7, AL8, and AL9: These blocks calculate the aldosterone secretion rate (AMR). Blocks AL6, AL7, and AL8 represent a sensitivity controller for the control of aldosterone secretion rate. The sensitivity control variable is AMKMUL in Block AL7. Block AL9 sets a lower limit to the aldosterone secretion equal to zero. AL9A: Provision is made here for infusion of aldosterone to perform infusion experiments (ALDINF). AL9B: Provision is made here to set the rate of aldosterone entering the circulatory system (AMR1) to a constant value (ALDKNS) irrespective of all other changes at earlier stages in this calculation.
  def comp aldosterone_secretion as
    // Inputs from other components
    var ANMAL: dimensionless {priv: none, pub: in};
    var OSMAL: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AMR1: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var AMKMUL: dimensionless {priv: none, pub: in};
    var ALDINF: dimensionless {priv: none, pub: in};
    var ALDKNS: dimensionless {priv: none, pub: in};
    // Internal variables
    var AMRBSC: dimensionless {priv: none, pub: none};
    var AMRT: dimensionless {priv: none, pub: none};
    var AMR: dimensionless {priv: none, pub: none};
    // value: AL5: Calculation of the basic rate of secretion of aldosterone (AMRBSC) by multiplying the potassium drive for secretion from Block AL4 times the angiotensin drive for aldosterone secretion (ANMAL).
    AMRBSC = ANMAL*0.909{dimensionless}*OSMAL;
    // value: AL6, AL7, AL8: These blocks calculate the aldosterone secretion rate (AMR). Blocks AL6, AL7, and AL8 represent a sensitivity controller for the control of aldosterone secretion rate. The sensitivity control variable is AMKMUL in Block AL7.
    AMRT = (AMRBSC-1{dimensionless})*AMKMUL+1{dimensionless};
    // value: AL9: Block AL9 sets a lower limit to the aldosterone secretion equal to zero.
    AMR = sel
      case AMRT < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        AMRT;
    endsel;
    // value: AL9A: Provision is made here for infusion of aldosterone to perform infusion experiments (ALDINF). AL9B: Provision is made here to set the rate of aldosterone entering the circulatory system (AMR1) to a constant value (ALDKNS) irrespective of all other changes at earlier stages in this calculation.
    AMR1 = sel
      case ALDKNS > 0{dimensionless}:
        ALDKNS;
      otherwise:
        AMR+ALDINF;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between aldosterone_secretion and angiotensin_control_of_aldosterone_secretion for
    vars ANMAL and ANMAL;
  enddef;
  def map between aldosterone_secretion and osmotic_control_of_aldosterone_secretion for
    vars OSMAL and OSMAL;
  enddef;
  // PARAMETER CONNECTIONS
  def map between aldosterone_secretion and aldosterone_parameter_values for
    vars AMKMUL and AMKMUL;
    vars ALDINF and ALDINF;
    vars ALDKNS and ALDKNS;
  enddef;
  // ========================================	ALDOSTERONE CONCENTRATION		=============================================

  // value: AL10, AL11, and AL12: Calculation of aldosterone concentration (AMC), allowing for a time delay in the build-up of the aldosterone. The time constant for the time delay is AMT in Block AL12.
  def comp aldosterone_concentration as
    // Inputs from other components
    var AMR1: dimensionless {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var AMC: dimensionless {init: 1.0, priv: none, pub: out};
    // Parameters from parameter_file
    var AMT: minute {priv: none, pub: in};
    // value: AL10, AL11, and AL12: Calculation of aldosterone concentration (AMC), allowing for a time delay in the build-up of the aldosterone. The time constant for the time delay is AMT in Block AL12.
    ode(AMC, time) = (AMR1-AMC)/AMT;
  enddef;
  // INPUT CONNECTIONS
  def map between aldosterone_concentration and aldosterone_secretion for
    vars AMR1 and AMR1;
  enddef;
  def map between aldosterone_concentration and aldosterone for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between aldosterone_concentration and aldosterone_parameter_values for
    vars AMT and AMT;
  enddef;
  // ========================================	GENERAL ALDOSTERONE MULTIPLIER	=============================================

  // value: AL13: This block calculates, based on the input of aldosterone concentration (AMC), an output factor (AM1) for the physiological multiplying effect of aldosterone on different physiological mechanisms. This is a temporary aldosterone multiplier effect. It is calculated as shown in the block, with AM1LL equal to the lower limit of AM1 and AM1UL equal to the upper limit. AL14, AL15, and AL16: These are a sensitivity controller; the control variable for sensitivity is ALDMM in Block AL15, and the output AM is a general aldosterone multiplier.
  def comp general_aldosterone_multiplier as
    // Inputs from other components
    var AMC: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AM: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var AM1UL: dimensionless {priv: none, pub: in};
    var AM1LL: dimensionless {priv: none, pub: in};
    var AMCSNS: dimensionless {priv: none, pub: in};
    var ALDMM: dimensionless {priv: none, pub: in};
    // Internal variables
    var AM1: dimensionless {priv: none, pub: none};
    // value: AL13: This block calculates, based on the input of aldosterone concentration (AMC), an output factor (AM1) for the physiological multiplying effect of aldosterone on different physiological mechanisms. This is a temporary aldosterone multiplier effect. It is calculated as shown in the block, with AM1LL equal to the lower limit of AM1 and AM1UL equal to the upper limit.
    AM1 = AM1UL-(AM1UL-1{dimensionless})/((AM1LL-1{dimensionless})/(AM1LL-AM1UL)*(AMC-1{dimensionless})*AMCSNS+1{dimensionless});
    // value: AL14, AL15, and AL16: These are a sensitivity controller; the control variable for sensitivity is ALDMM in Block AL15, and the output AM is a general aldosterone multiplier.
    AM = (AM1-1{dimensionless})*ALDMM+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between general_aldosterone_multiplier and aldosterone_concentration for
    vars AMC and AMC;
  enddef;
  // PARAMETER CONNECTIONS
  def map between general_aldosterone_multiplier and aldosterone_parameter_values for
    vars AM1UL and AM1UL;
    vars AM1LL and AM1LL;
    vars AMCSNS and AMCSNS;
    vars ALDMM and ALDMM;
  enddef;
  // ========================================	ALDOSTERONE EFFECT ON CELL MEMBRANE POTASSIUM TRANSPORT	=============================================

  // value: AL17, AL18, AL19, and AL20: This is an additional sensitivity control circuit for controlling the aldosterone multiplier effect on potassium transport through cell membranes (AMK), especially in the kidney tubules. The input to this system is the general aldosterone multiplier (AM), and the sensitivity controller is the variable AMKM in Block AL18. The lower limit to AMK is set by Block AL20.
  def comp aldosterone_effect_on_cell_membrane_K_transport as
    // Inputs from other components
    var AM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AMK: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var AMKM: dimensionless {priv: none, pub: in};
    // Internal variables
    var AMKT: dimensionless {priv: none, pub: none};
    // value: AL17, AL18 and AL19: This is an additional sensitivity control circuit for controlling the aldosterone multiplier effect on potassium transport through cell membranes (AMK), especially in the kidney tubules. The input to this system is the general aldosterone multiplier (AM), and the sensitivity controller is the variable AMKM in Block AL18.
    AMKT = (AM-1{dimensionless})*AMKM+1{dimensionless};
    // value: AL20: The lower limit to AMK is set by Block AL20.
    AMK = sel
      case AMKT < 0.2{dimensionless}:
        0.2{dimensionless};
      otherwise:
        AMKT;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between aldosterone_effect_on_cell_membrane_K_transport and general_aldosterone_multiplier for
    vars AM and AM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between aldosterone_effect_on_cell_membrane_K_transport and aldosterone_parameter_values for
    vars AMKM and AMKM;
  enddef;
  // ========================================	ALDOSTERONE EFFECT ON CELL MEMBRANE SODIUM TRANSPORT	=============================================

  // value: AL21, AL22, AL23, AL24, and AL25: This circuit calculates an aldosterone multiplier factor for control of sodium transport through cell membranes (AMNA), with the input to the circuit equal to the generalized aldosterone multiplier (AM) and a sensitivity controller (AMNAM) in Block AL22. The upper and lower limits for the controlling effect on sodium transport are set by variables AMNAUL and AMNALL in Blocks AL24 and AL25 respectively.
  def comp aldosterone_effect_on_cell_membrane_Na_transport as
    // Inputs from other components
    var AM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AMNA: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var AMNAM: dimensionless {priv: none, pub: in};
    var AMNAUL: dimensionless {priv: none, pub: in};
    var AMNALL: dimensionless {priv: none, pub: in};
    // Internal variables
    var AMNAT: dimensionless {priv: none, pub: none};
    // value: AL21, AL22 and AL23: This circuit calculates an aldosterone multiplier factor for control of sodium transport through cell membranes (AMNA), with the input to the circuit equal to the generalized aldosterone multiplier (AM) and a sensitivity controller (AMNAM) in Block AL22.
    AMNAT = (AM-1{dimensionless})*AMNAM+1{dimensionless};
    // value: AL24, and AL25: The upper and lower limits for the controlling effect on sodium transport are set by variables AMNAUL and AMNALL in Blocks AL24 and AL25 respectively.
    AMNA = sel
      case AMNAT < AMNALL:
        AMNALL;
      case AMNAT > AMNAUL:
        AMNAUL;
      otherwise:
        AMNAT;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between aldosterone_effect_on_cell_membrane_Na_transport and general_aldosterone_multiplier for
    vars AM and AM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between aldosterone_effect_on_cell_membrane_Na_transport and aldosterone_parameter_values for
    vars AMNAM and AMNAM;
    vars AMNAUL and AMNAUL;
    vars AMNALL and AMNALL;
  enddef;
  // ==========================================================	ALDOSTERONE PARAMETER VALUES	================================================================

  def comp aldosterone_parameter_values as
    var ANMALD: dimensionless {init: 2.5, priv: none, pub: out};
    // sensitivity controller, angiotensin effect on aldo secretion [P]
    var AMKMUL: dimensionless {init: 12, priv: none, pub: out};
    // sensitivity controller of AMR [P]
    var ALDINF: dimensionless {init: 0, priv: none, pub: out};
    // rate of exogenous aldosterone infusion [P]
    var ALDKNS: dimensionless {init: 0, priv: none, pub: out};
    // overriding value for aldosterone secretion [P]
    var AMT: minute {init: 60, priv: none, pub: out};
    // time constant, aldo accumulation and destruction [P]
    var AM1UL: dimensionless {init: 5, priv: none, pub: out};
    // AM1 upper limit [P]
    var AM1LL: dimensionless {init: 0, priv: none, pub: out};
    // AM1 lower limit [P]
    var AMCSNS: dimensionless {init: 0.65, priv: none, pub: out};
    // sensitivity controller, aldosterone secretion [P]
    var ALDMM: dimensionless {init: 2.5, priv: none, pub: out};
    // sensitivity controller of aldosterone multiplier [P]
    var AMKM: dimensionless {init: 0.5, priv: none, pub: out};
    // sensitivity controller of AMK [P]
    var AMNAM: dimensionless {init: 0.8, priv: none, pub: out};
    // sensitivity controller of AMNA [P]
    var AMNAUL: dimensionless {init: 15, priv: none, pub: out};
    // AMNA upper limit [P]
    var AMNALL: dimensionless {init: 0.04, priv: none, pub: out};
    // AMNA lower limit [P]
  enddef;
  // ===========================================================================================================================================================================
  // ========================================================	ANGIOTENSIN MODEL	===========================================================

  // value: This section calculates the control functions of angiotensin, beginning with the control of angiotensin formation by the kidneys in response to changes in the rate of flow of fluid in the renal tubules at the macula densa (MDFLW), and extending through a series of curve-fitting and sensitivity controlled equations to determine the multiple feedback effects of angiotensin to control the various aspects of circulatory function. Encapsulation grouping component containing all the components in the Angiotensin Model. The inputs and outputs of the Angiotensin Model must be passed by this component.
  def comp angiotensin as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var MDFLW: L_per_minute {priv: out, pub: in};
    // Outputs to components in other models
    var ANUVN: dimensionless {priv: in, pub: out};
    var ANU: dimensionless {priv: in, pub: out};
    var ANM: dimensionless {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  def map between angiotensin and angiotensin_effect_on_venous_constriction for
    vars ANUVN and ANUVN;
  enddef;
  def map between angiotensin and angiotensin_effect_on_circulation for
    vars ANU and ANU;
  enddef;
  def map between angiotensin and general_angiotensin_multiplier for
    vars ANM and ANM;
  enddef;
  // ========================================	INSTANTANEOUS ANGIONTENSIN FORMATION	=============================================

  // value: AN1: This block damps the variations in rate of fluid flow in the renal tubules at the macula densa (MDFLW). The damped outflow is the variable MDFLW3. NB - REMOVED DAMPING FORM AN1!!!! AN2: This block calculates the formation rate of angiotensin (ANGSCR) at different levels of MDFLW3.
  def comp instantaneous_angiotensin_formation as
    // Inputs from other components
    var MDFLW: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var ANGSCR: dimensionless {priv: none, pub: out};
    // Internal variables
    var MDFLW3: L_per_minute {priv: none, pub: none};
    // value: AN1: This block damps the variations in rate of fluid flow in the renal tubules at the macula densa (MDFLW). The damped outflow is the variable MDFLW3. NB - REMOVED DAMPING FORM AN1!!!!
    MDFLW3 = MDFLW;
    // value: AN2: This block calculates the formation rate of angiotensin (ANGSCR) at different levels of MDFLW3.
    ANGSCR = sel
      case MDFLW3 > 1{L_per_minute}:
        1{L_per_minute}/(1{L_per_minute}+(MDFLW3-1{L_per_minute})*72{dimensionless});
      otherwise:
        10{dimensionless}-9{L_per_minute}/(1{L_per_minute}+(1{L_per_minute}-MDFLW3)*8{dimensionless});
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between instantaneous_angiotensin_formation and angiotensin for
    vars MDFLW and MDFLW;
  enddef;
  // ========================================	TIME-DELAYED ANGIOTENSIN FORMATION	=============================================

  // value: AN4, AN5, AN6, AN7, and AN8: Calculation of additional formation of angiotensin caused after a long-term delay. That is, when the JG cells are stimulated over long periods of time, in addition to their acute effects on secretion rate of renin and subsequent formation of angiotensin, there is a long-term increase in numbers of active JG cells to give a long-term delayed response over a period of days. The variable ANXM adjusts the magnitude of this delayed response. ANX is the total response without regard to the time delay. ANV is the time-constant of the time delay. ANX1 is the total extra secretion after factoring in the time delay effects of blocks 6, 7, and 8.
  def comp time_delayed_angiotensin_formation as
    // Inputs from other components
    var ANGSCR: dimensionless {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var ANX1: dimensionless {init: 0.0, priv: none, pub: out};
    // Parameters from parameter_file
    var ANXM: dimensionless {priv: none, pub: in};
    var ANV: minute {priv: none, pub: in};
    // Internal variables
    var ANX: dimensionless {priv: none, pub: none};
    // value: AN4, AN5, AN6, AN7, and AN8: Calculation of additional formation of angiotensin caused after a long-term delay. That is, when the JG cells are stimulated over long periods of time, in addition to their acute effects on secretion rate of renin and subsequent formation of angiotensin, there is a long-term increase in numbers of active JG cells to give a long-term delayed response over a period of days. The variable ANXM adjusts the magnitude of this delayed response. ANX is the total response without regard to the time delay. ANV is the time-constant of the time delay. ANX1 is the total extra secretion after factoring in the time delay effects of blocks 6, 7, and 8.
    ANX = (ANGSCR-1{dimensionless})*ANXM;
    // value: AN4, AN5, AN6, AN7, and AN8: Calculation of additional formation of angiotensin caused after a long-term delay. That is, when the JG cells are stimulated over long periods of time, in addition to their acute effects on secretion rate of renin and subsequent formation of angiotensin, there is a long-term increase in numbers of active JG cells to give a long-term delayed response over a period of days. The variable ANXM adjusts the magnitude of this delayed response. ANX is the total response without regard to the time delay. ANV is the time-constant of the time delay. ANX1 is the total extra secretion after factoring in the time delay effects of blocks 6, 7, and 8.
    ode(ANX1, time) = (ANX-ANX1)/ANV;
  enddef;
  // INPUT CONNECTIONS
  def map between time_delayed_angiotensin_formation and instantaneous_angiotensin_formation for
    vars ANGSCR and ANGSCR;
  enddef;
  def map between time_delayed_angiotensin_formation and angiotensin for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between time_delayed_angiotensin_formation and angiotensin_parameter_values for
    vars ANXM and ANXM;
    vars ANV and ANV;
  enddef;
  // ========================================	TOTAL ANGIOTENSIN FORMATION	=============================================

  // value: AN9: Summation of instantaneous formation of angiotensin (ANGSCR) plus the time delayed formation of angiotensin (ANX1). AN10: Calculation of the total rate of formation of angiotensin (ANPR) in case some of the renal mass (and therefore some of the JG cells) has been removed or destroyed. Factor REK is equal to the proportion of kidney mass that is still functional. AN11: This sets the lower limit of ANPR to a very low level, almost zero, below which this cannot fall. The reason for this is to prevent a negative value from appearing.
  def comp total_angiotensin_formation as
    // Inputs from other components
    var ANGSCR: dimensionless {priv: none, pub: in};
    var ANX1: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ANPR: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var REK: dimensionless {priv: none, pub: in};
    // Internal variables
    var ANPRT: dimensionless {priv: none, pub: none};
    // value: AN9: Summation of instantaneous formation of angiotensin (ANGSCR) plus the time delayed formation of angiotensin (ANX1). AN10: Calculation of the total rate of formation of angiotensin (ANPR) in case some of the renal mass (and therefore some of the JG cells) has been removed or destroyed. Factor REK is equal to the proportion of kidney mass that is still functional.
    ANPRT = (ANGSCR+ANX1)*REK;
    // value: AN11: This sets the lower limit of ANPR to a very low level, almost zero, below which this cannot fall. The reason for this is to prevent a negative value from appearing.
    ANPR = sel
      case ANPRT < 0.00001{dimensionless}:
        0.00001{dimensionless};
      otherwise:
        ANPRT;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between total_angiotensin_formation and instantaneous_angiotensin_formation for
    vars ANGSCR and ANGSCR;
  enddef;
  def map between total_angiotensin_formation and time_delayed_angiotensin_formation for
    vars ANX1 and ANX1;
  enddef;
  // PARAMETER CONNECTIONS
  def map between total_angiotensin_formation and angiotensin_parameter_values for
    vars REK and REK;
  enddef;
  // ========================================	ARTIFICIAL ANGIOTENSIN FORMATION	=============================================

  // value: AN11A: This block allows the addition of infused angiotensin (ANGINF) to the amount of angiotensin that is formed in the body (ANPR). AN11B: This block allows one to disregard all the previous blocks and to set the total rate of angiotensin entering the circulatory system (ANPR1) to a constant level, ANGKNS. When ANGKNS is equal to zero or less, then Block 11B is ineffective.
  def comp artificial_angiotensin_formation as
    // Inputs from other components
    var ANPR: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ANPR1: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ANGKNS: dimensionless {priv: none, pub: in};
    var ANGINF: dimensionless {priv: none, pub: in};
    // value: AN11A: This block allows the addition of infused angiotensin (ANGINF) to the amount of angiotensin that is formed in the body (ANPR). AN11B: This block allows one to disregard all the previous blocks and to set the total rate of angiotensin entering the circulatory system (ANPR1) to a constant level, ANGKNS. When ANGKNS is equal to zero or less, then Block 11B is ineffective.
    ANPR1 = sel
      case ANGKNS > 0{dimensionless}:
        ANGKNS;
      otherwise:
        ANPR+ANGINF;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between artificial_angiotensin_formation and total_angiotensin_formation for
    vars ANPR and ANPR;
  enddef;
  // PARAMETER CONNECTIONS
  def map between artificial_angiotensin_formation and angiotensin_parameter_values for
    vars ANGKNS and ANGKNS;
    vars ANGINF and ANGINF;
  enddef;
  // ========================================	ANGIOTENSIN CONCENTRATION	=============================================

  // value: AN12, AN13, and AN14: These blocks convert the rate of entry of angiotensin into the body fluids (ANPR1), into the concentration of angiotensin (ANC) considering the normal value to be the numeral 1. The value ANT is the time constant for rate of change of angiotensin concentration in the body fluids. The value Z12 is a damping coefficient to allow damping of this conversion so that the model can be run faster for long-term simulations.
  def comp angiotensin_concentration as
    // Inputs from other components
    var ANPR1: dimensionless {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var ANC: dimensionless {init: 0.859476, priv: none, pub: out};
    // Parameters from parameter_file
    var ANT: minute {priv: none, pub: in};
    // value: AN12, AN13, and AN14: These blocks convert the rate of entry of angiotensin into the body fluids (ANPR1), into the concentration of angiotensin (ANC) considering the normal value to be the numeral 1. The value ANT is the time constant for rate of change of angiotensin concentration in the body fluids. The value Z12 is a damping coefficient to allow damping of this conversion so that the model can be run faster for long-term simulations.
    ode(ANC, time) = (ANPR1-ANC)/ANT;
  enddef;
  // INPUT CONNECTIONS
  def map between angiotensin_concentration and artificial_angiotensin_formation for
    vars ANPR1 and ANPR1;
  enddef;
  def map between angiotensin_concentration and angiotensin for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between angiotensin_concentration and angiotensin_parameter_values for
    vars ANT and ANT;
  enddef;
  // ========================================	GENERAL ANGIOTENSIN MULTIPLIER	=============================================

  // value: AN15: This is an equation that allows one to convert the concentration of angiotensin (ANC) into an angiotensin multiplier (ANM) which describes the multiplicative effect of angiotensin on various physiological functions, assuming the normal value of ANM to be 1.0. The value ANMUL is the upper limit to the level of ANM. ANMLL is the lower limit of ANM. And the value ANCSNS is a sensitivity value for adjusting the quantitative effect of ANC on ANM.
  def comp general_angiotensin_multiplier as
    // Inputs from other components
    var ANC: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ANM: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ANMUL: dimensionless {priv: none, pub: in};
    var ANMLL: dimensionless {priv: none, pub: in};
    var ANCSNS: dimensionless {priv: none, pub: in};
    // value: AN15: This is an equation that allows one to convert the concentration of angiotensin (ANC) into an angiotensin multiplier (ANM) which describes the multiplicative effect of angiotensin on various physiological functions, assuming the normal value of ANM to be 1.0. The value ANMUL is the upper limit to the level of ANM. ANMLL is the lower limit of ANM. And the value ANCSNS is a sensitivity value for adjusting the quantitative effect of ANC on ANM.
    ANM = ANMUL-(ANMUL-1{dimensionless})/((ANMLL-1{dimensionless})/(ANMLL-ANMUL)*(ANC-1{dimensionless})*ANCSNS+1{dimensionless});
  enddef;
  // INPUT CONNECTIONS
  def map between general_angiotensin_multiplier and angiotensin_concentration for
    vars ANC and ANC;
  enddef;
  // PARAMETER CONNECTIONS
  def map between general_angiotensin_multiplier and angiotensin_parameter_values for
    vars ANMUL and ANMUL;
    vars ANMLL and ANMLL;
    vars ANCSNS and ANCSNS;
  enddef;
  // ========================================	ANGIOTENSIN EFFECT ON CIRCULATION	=============================================

  // value: AN16, AN17, and AN18: These blocks are a sensitivity controller for converting the basic effect of the angiotensin multiplier (ANM) on other functional systems of the circulation (ANU). The sensitivity adjustment is the factor ANUM in Block 17. AN19: This block sets the lower limit to which ANU can fall (ANULL).
  def comp angiotensin_effect_on_circulation as
    // Inputs from other components
    var ANM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ANU: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ANUM: dimensionless {priv: none, pub: in};
    var ANULL: dimensionless {priv: none, pub: in};
    // Internal variables
    var ANU1: dimensionless {priv: none, pub: none};
    // value: AN16, AN17, and AN18: These blocks are a sensitivity controller for converting the basic effect of the angiotensin multiplier (ANM) on other functional systems of the circulation (ANU). The sensitivity adjustment is the factor ANUM in Block 17.
    ANU1 = (ANM-1{dimensionless})*ANUM+1{dimensionless};
    // value: AN19: This block sets the lower limit to which ANU can fall (ANULL).
    ANU = sel
      case ANU1 < ANULL:
        ANULL;
      otherwise:
        ANU1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between angiotensin_effect_on_circulation and general_angiotensin_multiplier for
    vars ANM and ANM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between angiotensin_effect_on_circulation and angiotensin_parameter_values for
    vars ANUM and ANUM;
    vars ANULL and ANULL;
  enddef;
  // ========================================	ANGIOTENSIN EFFECT ON VENOUS CONSTRICTION	=============================================

  // value: AN20, AN21, and AN22: Calculation of the effect of angiotensin on venous constriction (ANUVN), with sensitivity controlled by ANUVM in Block 21.
  def comp angiotensin_effect_on_venous_constriction as
    // Inputs from other components
    var ANU: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ANUVN: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ANUVM: dimensionless {priv: none, pub: in};
    // value: AN20, AN21, and AN22: Calculation of the effect of angiotensin on venous constriction (ANUVN), with sensitivity controlled by ANUVM in Block 21.
    ANUVN = (ANU-1{dimensionless})*ANUVM+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between angiotensin_effect_on_venous_constriction and angiotensin_effect_on_circulation for
    vars ANU and ANU;
  enddef;
  // PARAMETER CONNECTIONS
  def map between angiotensin_effect_on_venous_constriction and angiotensin_parameter_values for
    vars ANUVM and ANUVM;
  enddef;
  // ==========================================================	ANGIOTENSIN PARAMETER VALUES	================================================================

  def comp angiotensin_parameter_values as
    var ANXM: dimensionless {init: 0, priv: none, pub: out};
    // sensitivity controller of ANX [P]
    var ANV: minute {init: 5000, priv: none, pub: out};
    // time constant, angiotensin secretion [P]
    var REK: dimensionless {init: 1, priv: none, pub: out};
    // total functional renal mass, ratio to normal [P]
    var ANGINF: dimensionless {init: 0, priv: none, pub: out};
    // rate of exogenous angiotensin infusion [P]
    var ANGKNS: dimensionless {init: 0, priv: none, pub: out};
    // overriding value for angiotensin secretion [P]
    var ANT: minute {init: 12, priv: none, pub: out};
    // time constant, angiotensin accumulation and destruction [P]
    var Z12: dimensionless {init: 5, priv: none, pub: out};
    // damping factor, angiotensin system [P]
    var ANMUL: dimensionless {init: 1.8, priv: none, pub: out};
    // ANM upper limit [P]
    var ANMLL: dimensionless {init: 0.7, priv: none, pub: out};
    // ANM lower limit [P]
    var ANCSNS: dimensionless {init: 0.4, priv: none, pub: out};
    // sensitivity controller of ANM [P]
    var ANULL: dimensionless {init: 0.8, priv: none, pub: out};
    // ANU lower limit [P]
    var ANUM: dimensionless {init: 6, priv: none, pub: out};
    // sensitivity controller of ANU [P]
    var ANUVM: dimensionless {init: 0, priv: none, pub: out};
    // sensitivity controller of ANUVN [P]
  enddef;
  // ============================================================================================================================================================
  // ===================================================	ANTI-DIURETIC HORMONE MODEL	======================================================

  // value: Antidiuretic Hormone and its control functions. This section calculates the control of antidiuretic hormone secretion and also calculates multiplier factors for control of other aspects of circulatory function by antidiuretic hormone. The major factors that are considered to affect the rate of antidiuretic hormone secretion are (1) a feedback effect of osmotic concentration in the extracellular fluids as determined from the concentration of sodium (CNA), and (2) a feedback effect of arterial pressure (PA). Encapsulation grouping component containing all the components in the Anti-Diuretic Hormone Model. The inputs and outputs of the Anti-Diuretic Hormone Model must be passed by this component.
  def comp antidiuretic_hormone as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var CNA: monovalent_mEq_per_litre {priv: out, pub: in};
    var PA1: mmHg {priv: out, pub: in};
    // Outputs to components in other models
    var ADHMK: dimensionless {priv: in, pub: out};
    var ADHMV: dimensionless {priv: in, pub: out};
    var ADHC: dimensionless {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  def map between antidiuretic_hormone and ADH_effect_on_kidney for
    vars ADHMK and ADHMK;
  enddef;
  def map between antidiuretic_hormone and ADH_effect_on_nonrenal_vascular_resistance for
    vars ADHMV and ADHMV;
  enddef;
  def map between antidiuretic_hormone and ADH_in_blood for
    vars ADHC and ADHC;
    vars time and time;
  enddef;
  // ========================================	OSMOTIC CONTROL OF ANTIDIURETIC HORMONE SECRETION	=============================================

  // value: AD1, AD2, and AD3: Calculation of a multiplier factor (ADHNA) that determines the effect of the concentration of sodium in the extracellular fluid (CNA) on the secretion of ADH. The lower limit of CNA at which the normal stimulating effect of changes in CNA will affect antidiuretic hormone secretion is equal to CNR. The mathematical steps in Blocks AD1, AD2, and AD3 provide curve shaping effects for the relationship between CNA and ADHNA. AD8: The effect of sodium concentration on ADH secretion (ADHNA) is not allowed to go below zero.
  def comp osmotic_control_of_ADH_secretion as
    // Inputs from other components
    var CNA: monovalent_mEq_per_litre {priv: none, pub: in};
    // Outputs to other components
    var ADHNA: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var CNR: monovalent_mEq_per_litre {priv: none, pub: in};
    // Internal variables
    var ADHNA1: dimensionless {priv: none, pub: none};
    // value: AD1, AD2, and AD3: Calculation of a multiplier factor (ADHNA) that determines the effect of the concentration of sodium in the extracellular fluid (CNA) on the secretion of ADH. The lower limit of CNA at which the normal stimulating effect of changes in CNA will affect antidiuretic hormone secretion is equal to CNR. The mathematical steps in Blocks AD1, AD2, and AD3 provide curve shaping effects for the relationship between CNA and ADHNA.
    ADHNA1 = (CNA-CNR)/(142{monovalent_mEq_per_litre}-CNR);
    // value: AD8: The effect of sodium concentration on ADH secretion (ADHNA) is not allowed to go below zero.
    ADHNA = sel
      case ADHNA1 < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        ADHNA1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between osmotic_control_of_ADH_secretion and antidiuretic_hormone for
    vars CNA and CNA;
  enddef;
  // PARAMETER CONNECTIONS
  def map between osmotic_control_of_ADH_secretion and antidiuretic_hormone_parameter_values for
    vars CNR and CNR;
  enddef;
  // ========================================	PRESSURE CONTROL OF ANTIDIURETIC HORMONE SECRETION	=============================================

  // value: AD4, AD5, AD6, and AD7: Calculation of the effect of low levels of arterial pressure to cause secretion of antidiuretic hormone. The mathematical steps in these blocks provide appropriate curve shaping. Zero effect of pressure on ADH secretion occurs whenever the arterial pressure is greater than 85 mm Hg. The factor ADHPAM is the sensitivity control for the overall effect. The output of this set of blocks is ADHPR.
  def comp pressure_control_of_ADH_secretion as
    // Inputs from other components
    var PA1: mmHg {priv: none, pub: in};
    // Outputs to other components
    var ADHPR: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ADHPUL: mmHg {priv: none, pub: in};
    var ADHPAM: per_mmHg2 {priv: none, pub: in};
    // Internal variables
    var ADHPA: mmHg {priv: none, pub: none};
    // value: AD4, AD5, AD6, and AD7: Calculation of the effect of low levels of arterial pressure to cause secretion of antidiuretic hormone. The mathematical steps in these blocks provide appropriate curve shaping. Zero effect of pressure on ADH secretion occurs whenever the arterial pressure is greater than 85 mm Hg. The factor ADHPAM is the sensitivity control for the overall effect. The output of this set of blocks is ADHPR.
    ADHPA = sel
      case PA1 > ADHPUL:
        ADHPUL;
      otherwise:
        PA1;
    endsel;
    // value: AD4, AD5, AD6, and AD7: Calculation of the effect of low levels of arterial pressure to cause secretion of antidiuretic hormone. The mathematical steps in these blocks provide appropriate curve shaping. Zero effect of pressure on ADH secretion occurs whenever the arterial pressure is greater than 85 mm Hg. The factor ADHPAM is the sensitivity control for the overall effect. The output of this set of blocks is ADHPR.
    ADHPR = sqr(ADHPUL-ADHPA)*ADHPAM;
  enddef;
  // INPUT CONNECTIONS
  def map between pressure_control_of_ADH_secretion and antidiuretic_hormone for
    vars PA1 and PA1;
  enddef;
  // PARAMETER CONNECTIONS
  def map between pressure_control_of_ADH_secretion and antidiuretic_hormone_parameter_values for
    vars ADHPUL and ADHPUL;
    vars ADHPAM and ADHPAM;
  enddef;
  // ========================================	TOTAL ANTIDIURETIC HORMONE SECRETION	=============================================

  // value: AD9: Calculation of the net rate of ADH entry into the body fluids (ADH) by adding the partial effect of ADHNA for osmotic control of ADH secretion plus the partial effect ADHPR for pressure control of secretion, plus ADHINF for any rate of infusion of ADH.
  def comp total_ADH_secretion as
    // Inputs from other components
    var ADHNA: dimensionless {priv: none, pub: in};
    var ADHPR: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ADH: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ADHINF: dimensionless {priv: none, pub: in};
    // Internal variables
    var ADH1: dimensionless {priv: none, pub: none};
    // value: AD9: Calculation of the net rate of ADH entry into the body fluids (ADH) by adding the partial effect of ADHNA for osmotic control of ADH secretion plus the partial effect ADHPR for pressure control of secretion, plus ADHINF for any rate of infusion of ADH.
    ADH1 = ADHNA+ADHPR+ADHINF;
    ADH = sel
      case ADH1 < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        ADH1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between total_ADH_secretion and osmotic_control_of_ADH_secretion for
    vars ADHNA and ADHNA;
  enddef;
  def map between total_ADH_secretion and pressure_control_of_ADH_secretion for
    vars ADHPR and ADHPR;
  enddef;
  // PARAMETER CONNECTIONS
  def map between total_ADH_secretion and antidiuretic_hormone_parameter_values for
    vars ADHINF and ADHINF;
  enddef;
  // ========================================	ANTIDIURETIC HORMONE IN BLOOD	=============================================

  // value: AD10, AD11, AD12, and AD13: Calculation of instantaneous antidiuretic hormone concentration in the blood (ADHC) by integrating in Block 12 the rate of hormone entry into the fluids (ADH) with respect to time. A time constant for the integration (Block 11) is equal to ADHTC. Block 13 damps the response of this integration to prevent oscillation when very long iteration intervals are used in providing long-term solutions for the model.
  def comp ADH_in_blood as
    // Inputs from other components
    var ADH: dimensionless {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var ADHC: dimensionless {init: 1.0, priv: none, pub: out};
    // Parameters from parameter_file
    var ADHTC: minute {priv: none, pub: in};
    // value: AD10, AD11, AD12, and AD13: Calculation of instantaneous antidiuretic hormone concentration in the blood (ADHC) by integrating in Block 12 the rate of hormone entry into the fluids (ADH) with respect to time. A time constant for the integration (Block 11) is equal to ADHTC. Block 13 damps the response of this integration to prevent oscillation when very long iteration intervals are used in providing long-term solutions for the model.
    ode(ADHC, time) = (ADH-ADHC)/ADHTC;
  enddef;
  // INPUT CONNECTIONS
  def map between ADH_in_blood and total_ADH_secretion for
    vars ADH and ADH;
  enddef;
  // PARAMETER CONNECTIONS
  def map between ADH_in_blood and antidiuretic_hormone_parameter_values for
    vars ADHTC and ADHTC;
  enddef;
  // ====================================	ANTIDIURETIC HORMONE EFFECT ON NONRENAL VASCULAR RESISTANCE	========================================

  // value: AD14 and AD15: Calculation from the instantaneous concentration of ADH in the plasma (ADHC) of a multiplier factor (ADHMV) to describe the effect of antidiuretic hormone in causing contraction of many of the blood vessels of the body. Block 15 sets a lower limit for ADHMV equal to ADHVLL, and the upper limit is ADHVUL.
  def comp ADH_effect_on_nonrenal_vascular_resistance as
    // Inputs from other components
    var ADHC: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ADHMV: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ADHVUL: dimensionless {priv: none, pub: in};
    var ADHVLL: dimensionless {priv: none, pub: in};
    // Internal variables
    var ADHMV1: dimensionless {priv: none, pub: none};
    // value: AD14: Calculation from the instantaneous concentration of ADH in the plasma (ADHC) of a multiplier factor (ADHMV) to describe the effect of antidiuretic hormone in causing contraction of many of the blood vessels of the body.
    ADHMV1 = ADHVUL-(ADHVUL-1{dimensionless})/((ADHVLL-1{dimensionless})/(ADHVLL-ADHVUL)*(ADHC-1{dimensionless})+1{dimensionless});
    // value: AD15: Block 15 sets a lower limit for ADHMV equal to ADHVLL, and the upper limit is ADHVUL.
    ADHMV = sel
      case ADHMV1 < ADHVLL:
        ADHVLL;
      otherwise:
        ADHMV1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between ADH_effect_on_nonrenal_vascular_resistance and ADH_in_blood for
    vars ADHC and ADHC;
  enddef;
  // PARAMETER CONNECTIONS
  def map between ADH_effect_on_nonrenal_vascular_resistance and antidiuretic_hormone_parameter_values for
    vars ADHVUL and ADHVUL;
    vars ADHVLL and ADHVLL;
  enddef;
  // ========================================	ANTIDIURETIC HORMONE EFFECT ON KIDNEY	=============================================

  // value: AD16 and AD17: Calculation from the plasma concentration of ADH (ADHC) of a multiplier factor (ADHMK) to describe the effect of the ADH in affecting the kidney. Block 17 gives a lower limit to ADHMK equal to ADHKLL, and Block 16 gives an upper limit equal to AMKUL.
  def comp ADH_effect_on_kidney as
    // Inputs from other components
    var ADHC: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ADHMK: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ADHKLL: dimensionless {priv: none, pub: in};
    var ADHKUL: dimensionless {priv: none, pub: in};
    // Internal variables
    var ADHMK1: dimensionless {priv: none, pub: none};
    // value: AD16: Calculation from the plasma concentration of ADH (ADHC) of a multiplier factor (ADHMK) to describe the effect of the ADH in affecting the kidney.
    ADHMK1 = ADHKUL-(ADHKUL-1{dimensionless})/((ADHKLL-1{dimensionless})/(ADHKLL-ADHKUL)*(ADHC-1{dimensionless})+1{dimensionless});
    // value: AD17: Block 17 gives a lower limit to ADHMK equal to ADHKLL, and Block 16 gives an upper limit equal to AMKUL.
    ADHMK = sel
      case ADHMK1 < ADHKLL:
        ADHKLL;
      otherwise:
        ADHMK1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between ADH_effect_on_kidney and ADH_in_blood for
    vars ADHC and ADHC;
  enddef;
  // PARAMETER CONNECTIONS
  def map between ADH_effect_on_kidney and antidiuretic_hormone_parameter_values for
    vars ADHKLL and ADHKLL;
    vars ADHKUL and ADHKUL;
  enddef;
  // ======================================		ANTIDIURETIC HORMONE PARAMETER VALUES		==========================================

  def comp antidiuretic_hormone_parameter_values as
    var CNR: monovalent_mEq_per_litre {init: 139, priv: none, pub: out};
    // reference sodium conc to determine ADH secretion rate [P]
    var ADHPUL: mmHg {init: 85, priv: none, pub: out};
    // ADHPA upper limit [P]
    var ADHPAM: per_mmHg2 {init: 0.3, priv: none, pub: out};
    // sensitivity control of arterial pressure on ADH [P]
    var ADHINF: dimensionless {init: 0, priv: none, pub: out};
    // rate of exogenous ADH infusion [P]
    var ADHTC: minute {init: 15, priv: none, pub: out};
    // time constant, ADH secretion [P]
    var ADHVUL: dimensionless {init: 2.5, priv: none, pub: out};
    // ADHMV upper limit [P]
    var ADHVLL: dimensionless {init: 0.93617, priv: none, pub: out};
    // ADHMV lower limit [P]
    var ADHKLL: dimensionless {init: 0.2, priv: none, pub: out};
    // ADHMK lower limit [P]
    var ADHKUL: dimensionless {init: 5, priv: none, pub: out};
    // ADHMK upper limit [P]
  enddef;
  // ============================================================================================================================================================
  // ==================================================	ATRIAL NATRIURETIC PEPTIDE MODEL		=====================================================

  // value: This section calculates the control of atrial natriuretic peptide secretion by the left and right atria of the heart. It also calculates a multiplier factor for controlling the resistance of the afferent arterioles (AAR) of the kidneys. Encapsulation grouping component containing all the components in the Atrial Natriuretic Peptide Model. The inputs and outputs of the Atrial Natriuretic Peptide Model must be passed by this component.
  def comp atrial_natriuretic_peptide as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var PLA: mmHg {priv: out, pub: in};
    var PRA: mmHg {priv: out, pub: in};
    // Outputs to components in other models
    var ANPX: dimensionless {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  def map between atrial_natriuretic_peptide and ANP_effect_on_renal_afferent_arteriolar_resistance for
    vars ANPX and ANPX;
  enddef;
  // ========================================	TOTAL ATRIAL NATRIURETIC PEPTIDE SECRETED	=============================================

  // value: ANP1, ANP2, ANP3, ANP3A, and ANP4: Calculation of the total amount of atrial natriuretic peptide secreted at any given time. Block ANP1 determines the pressure level at which changes in left atrial pressure (PLA) will begin to affect atrinatriuretic peptide secretion. Block 1A sets a lower limit of zero for this secretion. Block ANP2 calculates from the pressure level in the right atrium (PRA) the stimulation of ANP output by the right atrium. Block 3 multiplies the output of the right atrium by two-fold (against a one-fold amount secreted by the left atrium). Block 3A sets a lower limit of zero for right atrial output. Block 4 adds the outputs from the left atrium and right atrium. ANP5: Block 5 normalizes the ANP secretion under normal conditions to a value of 1.
  def comp total_ANP_secreted as
    // Inputs from other components
    var PLA: mmHg {priv: none, pub: in};
    var PRA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var ANP: dimensionless {priv: none, pub: out};
    // Internal variables
    var ANPL: dimensionless {priv: none, pub: none};
    var ANPR2: dimensionless {priv: none, pub: none};
    // value: ANP1, ANP2, ANP3 and ANP3A: Calculation of the total amount of atrial natriuretic peptide secreted at any given time. Block ANP1 determines the pressure level at which changes in left atrial pressure (PLA) will begin to affect atrinatriuretic peptide secretion. Block 1A sets a lower limit of zero for this secretion. Block ANP2 calculates from the pressure level in the right atrium (PRA) the stimulation of ANP output by the right atrium. Block 3 multiplies the output of the right atrium by two-fold (against a one-fold amount secreted by the left atrium). Block 3A sets a lower limit of zero for right atrial output.
    ANPL = sel
      case (PLA-1{mmHg})*1{per_mmHg} < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        (PLA-1{mmHg})*1{per_mmHg};
    endsel;
    // value: ANP1, ANP2, ANP3 and ANP3A: Calculation of the total amount of atrial natriuretic peptide secreted at any given time. Block ANP1 determines the pressure level at which changes in left atrial pressure (PLA) will begin to affect atrinatriuretic peptide secretion. Block 1A sets a lower limit of zero for this secretion. Block ANP2 calculates from the pressure level in the right atrium (PRA) the stimulation of ANP output by the right atrium. Block 3 multiplies the output of the right atrium by two-fold (against a one-fold amount secreted by the left atrium). Block 3A sets a lower limit of zero for right atrial output.
    ANPR2 = sel
      case (PRA+1{mmHg})*2{per_mmHg} < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        (PRA+1{mmHg})*2{per_mmHg};
    endsel;
    // value: ANP4 and ANP5: Block 4 adds the outputs from the left atrium and right atrium. Block 5 normalizes the ANP secretion under normal conditions to a value of 1.
    ANP = (ANPL+ANPR2)/3{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between total_ANP_secreted and atrial_natriuretic_peptide for
    vars PLA and PLA;
    vars PRA and PRA;
  enddef;
  // ========================================	ATRIAL NATRIURETIC PEPTIDE INTO CIRCULATION	=============================================

  // value: ANP 7: This block allows infusion of ANP into the circulation (ANPINF). The output of the block is ANP1 which is the total rate of ANP entering the circulation at any given time.
  def comp ANP_into_circulation as
    // Inputs from other components
    var ANP: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ANP1: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ANPKNS: dimensionless {priv: none, pub: in};
    var ANPINF: dimensionless {priv: none, pub: in};
    // value: ANP 7: This block allows infusion of ANP into the circulation (ANPINF). The output of the block is ANP1 which is the total rate of ANP entering the circulation at any given time.
    ANP1 = sel
      case ANPKNS > 0{dimensionless}:
        ANPKNS;
      otherwise:
        ANP+ANPINF;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between ANP_into_circulation and total_ANP_secreted for
    vars ANP and ANP;
  enddef;
  // PARAMETER CONNECTIONS
  def map between ANP_into_circulation and atrial_natriuretic_peptide_parameter_values for
    vars ANPKNS and ANPKNS;
    vars ANPINF and ANPINF;
  enddef;
  // ========================================	ATRIAL NATRIURETIC PEPTIDE IN PLASMA	=============================================
  // ========================================	CHECK THIS EQUATION! REMOVED DAMPING FROM DE!!!	=============================================

  // value: ANP8, ANP9, and ANP10: Calculation of the concentration of ANP in the plasma (ANPC) from the rate of entry of ANP into the plasma (ANP1). The time constant for build-up of ANP in the circulation is determined by ANPTC in Block 9. ANPC is normalized to 1.
  def comp ANP_in_plasma as
    // Inputs from other components
    var ANP1: dimensionless {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var ANPC: dimensionless {init: 1.0, priv: none, pub: out};
    // Parameters from parameter_file
    var ANPTC: minute {priv: none, pub: in};
    // value: ANP8, ANP9, and ANP10: Calculation of the concentration of ANP in the plasma (ANPC) from the rate of entry of ANP into the plasma (ANP1). The time constant for build-up of ANP in the circulation is determined by ANPTC in Block 9. ANPC is normalized to 1.
    ode(ANPC, time) = (ANP1-ANPC)/ANPTC;
  enddef;
  // INPUT CONNECTIONS
  def map between ANP_in_plasma and ANP_into_circulation for
    vars ANP1 and ANP1;
  enddef;
  def map between ANP_in_plasma and atrial_natriuretic_peptide for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between ANP_in_plasma and atrial_natriuretic_peptide_parameter_values for
    vars ANPTC and ANPTC;
  enddef;
  // ========================================	ANP EFFECT ON RENAL AFFERENT ARTERIOLAR RESISTANCE	=============================================

  // value: ANP11: This curve calculates a multiplier factor (ANPX) for determining the effect of ANP on the afferent arteriolar resistance of the kidneys. The upper limit of ANPX is ANPXUL. ANP 12: This block sets the lower limit of ANPX equal to -1.
  def comp ANP_effect_on_renal_afferent_arteriolar_resistance as
    // Inputs from other components
    var ANPC: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ANPX: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ANPXUL: dimensionless {priv: none, pub: in};
    // Internal variables
    var ANPX1: dimensionless {priv: none, pub: none};
    // value: ANP11: This curve calculates a multiplier factor (ANPX) for determining the effect of ANP on the afferent arteriolar resistance of the kidneys. The upper limit of ANPX is ANPXUL.
    ANPX1 = ANPXUL-ANPXUL/(0.5555556{dimensionless}*(1{dimensionless}+ANPC));
    // value: ANP 12: This block sets the lower limit of ANPX equal to -1.
    ANPX = sel
      case ANPX1 < -1{dimensionless}:
        -1{dimensionless};
      otherwise:
        ANPX1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between ANP_effect_on_renal_afferent_arteriolar_resistance and ANP_in_plasma for
    vars ANPC and ANPC;
  enddef;
  // PARAMETER CONNECTIONS
  def map between ANP_effect_on_renal_afferent_arteriolar_resistance and atrial_natriuretic_peptide_parameter_values for
    vars ANPXUL and ANPXUL;
  enddef;
  // =============================================	ATRIAL NATRIURETIC PEPTIDE PARAMETER VALUES 		=====================================

  def comp atrial_natriuretic_peptide_parameter_values as
    var ANPKNS: dimensionless {init: 0, priv: none, pub: out};
    // overriding value of ANP secretion rate
    var ANPINF: dimensionless {init: 0, priv: none, pub: out};
    // rate of exogenous ANP infusion
    var ANPTC: minute {init: 4, priv: none, pub: out};
    // time constant, ANP accumulation and destruction [P]
    var ANPXUL: dimensionless {init: 10, priv: none, pub: out};
    // ANPX upper limit [P]
  enddef;
  // ============================================================================================================================================================
  // ========================================================	AUTONOMICS MODEL		===========================================================

  // value: Autonomic Control Of The Circulation Autonomic control of the circulation primarily operates through the sympathetic system, though to a slight extent through parasympathetic signals to the heart. These have been lumped together, and there are basically three separate feedback mechanisms in this computational block. These are: (1) feedback from the baroreceptor control system; (2) feedback from the peripheral chemoreceptors in the carotid and aortic bodies,; and (3) feedback control of the circulatory system caused by central nervous system ischemia, that is, ischemia of the vasomotor center of the brainstem. Several other inputs that affect the autonomic nervous system are also included. These are: activation of the autonomic nervous system during exercise; baroreceptor feedback effects from pulmonary artery pressure (PPA), left atrial pressure (PLA), and an effect of low blood PO2 (PO2ART). Note: Not shown in the diagram is also a variable (STA) that is normally zero. When it is set to any level above zero, the value of the general autonomic multiplier (AU) becomes fixed to the value of STA. WHERE DO I PUT THIS NOTE????? Encapsulation grouping component containing all the components in the Autonomics Model. The inputs and outputs of the Autonomics Model must be passed by this component.
  def comp autonomics as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var PA: mmHg {priv: out, pub: in};
    var PO2ART: mmHg {priv: out, pub: in};
    var PLA: mmHg {priv: out, pub: in};
    var PRA: mmHg {priv: out, pub: in};
    var PPA: mmHg {priv: out, pub: in};
    // Outputs to components in other models
    var PA1: mmHg {priv: in, pub: out};
    var VVR: litre {priv: in, pub: out};
    var AUH: dimensionless {priv: in, pub: out};
    var AUR: dimensionless {priv: in, pub: out};
    var AUM: dimensionless {priv: in, pub: out};
    var AOM: dimensionless {priv: in, pub: out};
    var AVE: dimensionless {priv: in, pub: out};
    var AU: dimensionless {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  def map between autonomics and pressure_driving_autonomic_receptors for
    vars PA1 and PA1;
    vars PA and PA;
  enddef;
  def map between autonomics and autonomic_drive_on_target_organs_and_tissues for
    vars VVR and VVR;
    vars AUH and AUH;
    vars AUR and AUR;
    vars AUM and AUM;
    vars AOM and AOM;
    vars AVE and AVE;
  enddef;
  def map between autonomics and actual_autonomic_stimulation for
    vars AU and AU;
    vars time and time;
  enddef;
  // ========================================	PRESSURE DRIVING AUTONOMIC RECEPTORS, PA1		=============================================

  // value: AU1: Calculation of the effective systemic arterial pressure (PA1) by subtracting any pressure drop (EXE) between the output point of the heart where the pressure is equal to PA and the remainder of the aortic tree where the pressure will be equal to PA1. This block allows simulation of aortic constriction at its root. AU2: A block that will allow one to set the effective systemic arterial pressure (PA1) to any constant value desired by increasing the value CRRFLX to any value above zero. As long as it remains at zero, there is no effect.
  def comp pressure_driving_autonomic_receptors as
    // Inputs from other components
    var PA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var PA1: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var CRRFLX: mmHg {priv: none, pub: in};
    var EXE: mmHg {priv: none, pub: in};
    // value: AU1: Calculation of the effective systemic arterial pressure (PA1) by subtracting any pressure drop (EXE) between the output point of the heart where the pressure is equal to PA and the remainder of the aortic tree where the pressure will be equal to PA1. This block allows simulation of aortic constriction at its root. AU2: A block that will allow one to set the effective systemic arterial pressure (PA1) to any constant value desired by increasing the value CRRFLX to any value above zero. As long as it remains at zero, there is no effect.
    PA1 = sel
      case CRRFLX > 0.0000001{mmHg}:
        CRRFLX;
      otherwise:
        PA-EXE;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  // see Autonomics connections
  // PARAMETER CONNECTIONS
  def map between pressure_driving_autonomic_receptors and autonomics_parameter_values for
    vars CRRFLX and CRRFLX;
    vars EXE and EXE;
  enddef;
  // ========================================	CHEMORECEPTORS - EFFECT	OF PA	=============================================

  // value: AU4: Calculation of the nervous output from the chemoreceptors (AUC) at the different systemic arterial pressure levels (PA1). AU19: Sensitivity control for increasing or decreasing the degree of response of AUC to chemoreceptor nervous output.
  def comp chemoreceptors_effect_of_PA as
    // Inputs from other components
    var PA1: mmHg {priv: none, pub: in};
    // Outputs to other components
    var AUC: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var AUC1: dimensionless {priv: none, pub: in};
    // value: AU4: Calculation of the nervous output from the chemoreceptors (AUC) at the different systemic arterial pressure levels (PA1). AU19: Sensitivity control for increasing or decreasing the degree of response of AUC to chemoreceptor nervous output.
    AUC = sel
      case (PA1 < 80{mmHg}) and (PA1 >= 40{mmHg}):
        0.005{per_mmHg}*(80{mmHg}-PA1)*AUC1;
      case PA1 < 40{mmHg}:
        0.2{dimensionless}*AUC1;
      otherwise:
        0{dimensionless};
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between chemoreceptors_effect_of_PA and pressure_driving_autonomic_receptors for
    vars PA1 and PA1;
  enddef;
  // PARAMETER CONNECTIONS
  def map between chemoreceptors_effect_of_PA and autonomics_parameter_values for
    vars AUC1 and AUC1;
  enddef;
  // ========================================	CHEMORECEPTORS - EFFECT	OF ARTERIAL PO2	=============================================

  // value: AU20: Calculation of a nervous factor (AUC2) for effecting autonomic control of the circulation depending on the peripheral level of oxygen in the blood (PO2ART). O2CHMO is a sensitivity controller. AU21: Addition of the chemoreflex output (AUC) caused by activation of the chemoreceptors by low arterial pressure plus the chemoreceptor output (AUC2) caused by reduced arterial oxygen saturation (PO2ART). The output of Block 21 is equal to AUC3.
  def comp chemoreceptors_effect_of_art_PO2 as
    // Inputs from other components
    var PO2ART: mmHg {priv: none, pub: in};
    var AUC: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AUC3: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var O2CHMO: per_mmHg {priv: none, pub: in};
    // Internal variables
    var AUC2: dimensionless {priv: none, pub: none};
    // value: AU20: Calculation of a nervous factor (AUC2) for effecting autonomic control of the circulation depending on the peripheral level of oxygen in the blood (PO2ART). O2CHMO is a sensitivity controller.
    AUC2 = sel
      case (PO2ART < 80{mmHg}) and (PO2ART >= 40{mmHg}):
        O2CHMO*(80{mmHg}-PO2ART);
      case PO2ART < 40{mmHg}:
        O2CHMO*40{mmHg};
      otherwise:
        0{dimensionless};
    endsel;
    // value: AU21: Addition of the chemoreflex output (AUC) caused by activation of the chemoreceptors by low arterial pressure plus the chemoreceptor output (AUC2) caused by reduced arterial oxygen saturation (PO2ART). The output of Block 21 is equal to AUC3.
    AUC3 = AUC+AUC2;
  enddef;
  // INPUT CONNECTIONS
  def map between chemoreceptors_effect_of_art_PO2 and autonomics for
    vars PO2ART and PO2ART;
  enddef;
  def map between chemoreceptors_effect_of_art_PO2 and chemoreceptors_effect_of_PA for
    vars AUC and AUC;
  enddef;
  // PARAMETER CONNECTIONS
  def map between chemoreceptors_effect_of_art_PO2 and autonomics_parameter_values for
    vars O2CHMO and O2CHMO;
  enddef;
  // ========================================	BARO REFLEX / ARTERIAL BARORECEPTORS	=============================================
  // ========================================	FIX!!!! - MISSING AU17 and AU14-16!!!	=============================================

  // value: AU3: Calculation of the nervous output from the baroreceptors (AUB) at the different systemic arterial pressure levels (PA1). AU6, AU7, and AU8: Sensitivity control of the effect of baroreceptor reflex output (AUB) on the autonomic nervous system. The output of this sensitivity controller is AU6A, and the degree of sensitivity control is equal to AUX. AU9, AU10, and AU11: Time delay in the buildup of sympathetic output (AU6) that results from changes in baroreceptor reflex nervous output (AU6A). The time constant of this delay circuit is equal to BAROTC. AU14, AU15, and AU16: Calculation of adaptation of the baroreceptor feedback mechanism (AU4) over a period of hours. The time constant of this adaptation is equal to AUK. THIS IS COMMENTED OUT BECAUSE IT IS NOT IN THE MODSIM CODE AU17: This block sets AU6 equal to AU6A irrespective of the time constant for buildup of the nervous effect of the baroreceptor reflex when the iteration interval for solution of the equations is greater than .16666. This prevents some instability when the equations are being calculated for long-term instead of short-term changes. AU18: Damping of baroreceptor autonomic feedback output (AU6) when long-term solutions are being calculated, to prevent oscillation in the circuit. The output after the damping is AU6C. MDMP sets the degree of damping.
  def comp arterial_baroreceptor_reflex as
    // Inputs from other components
    var PA1: mmHg {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var AU6C: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var AUX: dimensionless {priv: none, pub: in};
    var AUK: per_minute {priv: none, pub: in};
    var BAROTC: minute {priv: none, pub: in};
    // Internal variables
    var AUB: dimensionless {priv: none, pub: none};
    var A1B: dimensionless {priv: none, pub: none};
    var AU6A: dimensionless {priv: none, pub: none};
    // <variable name="AU8"	units="per_minute" private_interface="none" public_interface="none"/>
    // <variable name="AU2"	units="dimensionless" private_interface="none" public_interface="none"/>
    var AU4: dimensionless {init: -0.060024, priv: none, pub: none};
    var AU6: dimensionless {init: 1.00132, priv: none, pub: none};
    // value: AU3: Calculation of the nervous output from the baroreceptors (AUB) at the different systemic arterial pressure levels (PA1).
    AUB = sel
      case (PA1 < 160{mmHg}) and (PA1 >= 80{mmHg}):
        0.016667{per_mmHg}*(160{mmHg}-PA1);
      case PA1 < 80{mmHg}:
        1.3336{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // value: AU6, AU7, and AU8: Sensitivity control of the effect of baroreceptor reflex output (AUB) on the autonomic nervous system. The output of this sensitivity controller is AU6A, and the degree of sensitivity control is equal to AUX.
    A1B = (AUB-1{dimensionless})*AUX+1{dimensionless};
    // value: AU6, AU7, and AU8: Sensitivity control of the effect of baroreceptor reflex output (AUB) on the autonomic nervous system. The output of this sensitivity controller is AU6A, and the degree of sensitivity control is equal to AUX.
    AU6A = A1B-AU4;
    // value: AU9, AU10, and AU11: Time delay in the buildup of sympathetic output (AU6) that results from changes in baroreceptor reflex nervous output (AU6A). The time constant of this delay circuit is equal to BAROTC.
    ode(AU6, time) = (AU6A-AU6)/BAROTC;
    // 			<apply id="AU14">
    //                 <eq/>
    //                 <ci>AU2</ci>
    //                 <apply>
    //                     <minus/>
    //                     <ci>AU6</ci>
    //                     <cn cellml:units="dimensionless">1</cn>
    //                 </apply>
    //             </apply>
    // 			<apply id="AU15">
    //                 <eq/>
    //                 <ci>AU8</ci>
    //                 <apply>
    //                     <times/>
    //                     <ci>AUK</ci>
    //                     <ci>AU2</ci>
    //                 </apply>
    //             </apply>
    // 			<apply id="AU16">
    //                 <eq/>
    //                 <apply>
    //                     <diff/>
    //                     <bvar>
    //                         <ci>time</ci>
    //                     </bvar>
    //                     <ci>AU4</ci>
    //                 </apply>
    //                 <ci>AU8</ci>
    //             </apply>
    // value: AU18: Damping of baroreceptor autonomic feedback output (AU6) when long-term solutions are being calculated, to prevent oscillation in the circuit. The output after the damping is AU6C. MDMP sets the degree of damping.
    AU6C = AU6;
  enddef;
  // INPUT CONNECTIONS
  def map between arterial_baroreceptor_reflex and pressure_driving_autonomic_receptors for
    vars PA1 and PA1;
  enddef;
  def map between arterial_baroreceptor_reflex and autonomics for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between arterial_baroreceptor_reflex and autonomics_parameter_values for
    vars AUX and AUX;
    vars AUK and AUK;
    vars BAROTC and BAROTC;
  enddef;
  // ========================================	CNS ISCHEMIC REFLEX	=============================================

  // value: AU5: Calculation of the nervous output (AUN) caused by activation of the central nervous system ischemic reflex, resulting from reduced systemic arterial pressure (PA1). AU22: Control of the sensitivity of the CNS ischemic reflex output by the sensitivity controller AUN1.
  def comp CNS_ischemic_reflex as
    // Inputs from other components
    var PA1: mmHg {priv: none, pub: in};
    // Outputs to other components
    var AUN: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var AUN1: dimensionless {priv: none, pub: in};
    // value: AU5: Calculation of the nervous output (AUN) caused by activation of the central nervous system ischemic reflex, resulting from reduced systemic arterial pressure (PA1). AU22: Control of the sensitivity of the CNS ischemic reflex output by the sensitivity controller AUN1.
    AUN = sel
      case PA1 < 40{mmHg}:
        0.04{per_mmHg}*(40{mmHg}-PA1)*AUN1;
      otherwise:
        0{dimensionless};
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between CNS_ischemic_reflex and pressure_driving_autonomic_receptors for
    vars PA1 and PA1;
  enddef;
  // PARAMETER CONNECTIONS
  def map between CNS_ischemic_reflex and autonomics_parameter_values for
    vars AUN1 and AUN1;
  enddef;
  // ==============================	STRETCH RECEPTORS - RESPONSE TO PRESSURE IN PULMONARY VASCULATURE	====================================

  // value: AU24, AU25, AU26, AU27, and AU28: Calculation of an additional factor (AULP) that affects the total autonomic response, caused by stretch receptors in the pulmonary vasculature. These are in response to left atrial pressure (PLA), right atrial pressure (PRA), and pulmonary arterial pressure (PPA). The sensitivity controller for these effects is AULPM in Block 27.
  def comp autonomic_response_to_vasculature_pressure as
    // Inputs from other components
    var PLA: mmHg {priv: none, pub: in};
    var PRA: mmHg {priv: none, pub: in};
    var PPA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var AULP: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var AULPM: dimensionless {priv: none, pub: in};
    // value: AU24, AU25, AU26, AU27, and AU28: Calculation of an additional factor (AULP) that affects the total autonomic response, caused by stretch receptors in the pulmonary vasculature. These are in response to left atrial pressure (PLA), right atrial pressure (PRA), and pulmonary arterial pressure (PPA). The sensitivity controller for these effects is AULPM in Block 27.
    AULP = (15{mmHg}/(PLA+PRA+PPA)-1{dimensionless})*AULPM+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between autonomic_response_to_vasculature_pressure and autonomics for
    vars PLA and PLA;
    vars PRA and PRA;
    vars PPA and PPA;
  enddef;
  // PARAMETER CONNECTIONS
  def map between autonomic_response_to_vasculature_pressure and autonomics_parameter_values for
    vars AULPM and AULPM;
  enddef;
  // ========================================	EFFECT OF EXERCISE ON AUTONOMIC OUTPUT	=============================================

  // value: AU29, AU30, AU31, and AU32: Effect of the exercise nervous signal (EXC) on autonomic output. The exponent (EXCXP) in Block 29 provides a curve fitting effect of exercise on the autonomic output, and the factor (EXCML) is a sensitivity multiplier effect.
  def comp autonomic_response_to_exercise as
    // Outputs to other components
    var AUEX: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var EXC: dimensionless {priv: none, pub: in};
    var EXCXP: dimensionless {priv: none, pub: in};
    // value: AU29, AU30, AU31, and AU32: Effect of the exercise nervous signal (EXC) on autonomic output. The exponent (EXCXP) in Block 29 provides a curve fitting effect of exercise on the autonomic output, and the factor (EXCML) is a sensitivity multiplier effect.
    AUEX = pow(EXC, EXCXP);
  enddef;
  // PARAMETER CONNECTIONS
  def map between autonomic_response_to_exercise and autonomics_parameter_values for
    vars EXC and EXC;
    vars EXCXP and EXCXP;
  enddef;
  // ========================================	TOTAL AUTONOMIC STIMULATION	=============================================

  // value: AU23: Summation of the different nervous output controls of autonomic stimulation, AUC3 from the chemoreceptor component, AU6C from the arterial baroreceptor reflex component, and the output of Block 22 from the CNS ischemic reflex component. AU33: Summation of all of the different factors affecting autonomic stimulation of the circulation, giving a total output of AUTTL. AU34: Limitation of the lower level of autonomic stimulation of the circulatory system so that this cannot fall below the level of zero.
  def comp total_autonomic_stimulation as
    // Inputs from other components
    var AUC3: dimensionless {priv: none, pub: in};
    var AU6C: dimensionless {priv: none, pub: in};
    var AUN: dimensionless {priv: none, pub: in};
    var AULP: dimensionless {priv: none, pub: in};
    var AUEX: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AUTTL: dimensionless {priv: none, pub: out};
    // Internal variables
    var AUTTL1: dimensionless {priv: none, pub: none};
    // Parameters from parameter_file
    var EXCML: dimensionless {priv: none, pub: in};
    // value: AU23: Summation of the different nervous output controls of autonomic stimulation, AUC3 from the chemoreceptor component, AU6C from the arterial baroreceptor reflex component, and the output of Block 22 from the CNS ischemic reflex component. AU33: Summation of all of the different factors affecting autonomic stimulation of the circulation, giving a total output of AUTTL.
    AUTTL1 = (AUEX*AULP*(AUC3+AU6C+AUN)-1{dimensionless})*EXCML+1{dimensionless};
    // value: AU34: Limitation of the lower level of autonomic stimulation of the circulatory system so that this cannot fall below the level of zero.
    AUTTL = sel
      case AUTTL1 < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        AUTTL1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between total_autonomic_stimulation and chemoreceptors_effect_of_art_PO2 for
    vars AUC3 and AUC3;
  enddef;
  def map between total_autonomic_stimulation and arterial_baroreceptor_reflex for
    vars AU6C and AU6C;
  enddef;
  def map between total_autonomic_stimulation and CNS_ischemic_reflex for
    vars AUN and AUN;
  enddef;
  def map between total_autonomic_stimulation and autonomic_response_to_vasculature_pressure for
    vars AULP and AULP;
  enddef;
  def map between total_autonomic_stimulation and autonomic_response_to_exercise for
    vars AUEX and AUEX;
  enddef;
  // PARAMETER CONNECTIONS
  def map between total_autonomic_stimulation and autonomics_parameter_values for
    vars EXCML and EXCML;
  enddef;
  // ========================================	ACTUAL AUTONOMIC STIMULATION		=============================================

  // value: AU35, AU36, and AU37: This is a time-delay circuit to delay the peripheral changes that occur in the circulatory system for a fraction of a minute after changes in the nervous component take place. This results from the need to build up autonomic transmitter substance and for the different organs to respond. The output after this delay circuit is AU1. The time constant of the delay is AUDMP. AU38: This is a curve fitting step to fit the output strength of functional reaction to sympathetic stimulation (AU) to the input level of nervous stimulation (AU1). The maximum level of AU is set by the equation in this block to equal AUMAX. AUSLPC determines the slope of the relationship. AU39: This sets the minimum level of AU (the output functional reaction) equal to a minimum value of AUMIN.
  def comp actual_autonomic_stimulation as
    // Inputs from other components
    var AUTTL: dimensionless {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var AU: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var AUDMP: minute {priv: none, pub: in};
    var AUMAX: dimensionless {priv: none, pub: in};
    var AUMIN: dimensionless {priv: none, pub: in};
    var AUSLP: dimensionless {priv: none, pub: in};
    // Internal variables
    var DAU: per_minute {priv: none, pub: none};
    var AU1: dimensionless {init: 1.00007, priv: none, pub: none};
    var AUT: dimensionless {priv: none, pub: none};
    // value: AU35, AU36, and AU37: This is a time-delay circuit to delay the peripheral changes that occur in the circulatory system for a fraction of a minute after changes in the nervous component take place. This results from the need to build up autonomic transmitter substance and for the different organs to respond. The output after this delay circuit is AU1. The time constant of the delay is AUDMP.
    DAU = (AUTTL-AU1)/AUDMP;
    // value: AU35, AU36, and AU37: This is a time-delay circuit to delay the peripheral changes that occur in the circulatory system for a fraction of a minute after changes in the nervous component take place. This results from the need to build up autonomic transmitter substance and for the different organs to respond. The output after this delay circuit is AU1. The time constant of the delay is AUDMP.
    ode(AU1, time) = DAU;
    // value: AU38: This is a curve fitting step to fit the output strength of functional reaction to sympathetic stimulation (AU) to the input level of nervous stimulation (AU1). The maximum level of AU is set by the equation in this block to equal AUMAX. AUSLPC determines the slope of the relationship.
    AUT = AUMAX-(AUMAX-1{dimensionless})/exp(AUSLP*(AU1-1{dimensionless}));
    // value: AU39: This sets the minimum level of AU (the output functional reaction) equal to a minimum value of AUMIN.
    AU = sel
      case AUT < AUMIN:
        AUMIN;
      otherwise:
        AUT;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between actual_autonomic_stimulation and total_autonomic_stimulation for
    vars AUTTL and AUTTL;
  enddef;
  // PARAMETER CONNECTIONS
  def map between actual_autonomic_stimulation and autonomics_parameter_values for
    vars AUDMP and AUDMP;
    vars AUMAX and AUMAX;
    vars AUMIN and AUMIN;
    vars AUSLP and AUSLP;
  enddef;
  // ==============================	AUTONOMIC DRIVE ON THE VARIOUS TARGET ORGANS AND TISSUES	=================================
  // ==============================	FIX!!! - AU47 AND AU48 NOT IN ORIGINAL CODE BUT ARE ON DIAGRAM!!!!	=================================

  // value: AU40 and AU41: Calculation of the effect on venous vascular resistance (VVR) of different levels of autonomic functional reaction (AU). The sensitivity control is AUL, and VV9 determines the range. AU42: A step to reduce the output effect of normal autonomic reaction (AU) equal to zero (AUO) so that differences from control levels can be activated in Blocks 43, 45, 47, 50, and 53. AU43 and AU44: Sensitivity control for the autonomic effect on the heart (AUH). The sensitivity is controlled by AUV. AU45 and AU46: Sensitivity control of the autonomic effect on heart rate (AUR). The sensitivity is controlled by AUS. AU47 and AU48: Calculation of the autonomic effect on muscle metabolism (AOM). The sensitivity control for this variable is O2A. AU50, AU51, and AU52: Calculation of an autonomic multiplier effect that is used at multiple points in the circulatory system (AUM). The values AUM1 and AUM2 are curve fitting controls. AU53 and AU54: Sensitivity control for adjusting the autonomic multiplier effect on the venous tree (AVE). The variable (AUY) controls the sensitivity.
  def comp autonomic_drive_on_target_organs_and_tissues as
    // Inputs from other components
    var AU: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var VVR: litre {priv: none, pub: out};
    var AUH: dimensionless {priv: none, pub: out};
    var AUR: dimensionless {priv: none, pub: out};
    var AOM: dimensionless {priv: none, pub: out};
    var AUM: dimensionless {priv: none, pub: out};
    var AVE: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var VV9: litre {priv: none, pub: in};
    var AUL: litre {priv: none, pub: in};
    var AUV: dimensionless {priv: none, pub: in};
    var AUS: dimensionless {priv: none, pub: in};
    var O2A: dimensionless {priv: none, pub: in};
    var AUM1: dimensionless {priv: none, pub: in};
    var AUM2: dimensionless {priv: none, pub: in};
    var AUY: dimensionless {priv: none, pub: in};
    // Internal variables
    var AUO: dimensionless {priv: none, pub: none};
    // value: AU40 and AU41: Calculation of the effect on venous vascular resistance (VVR) of different levels of autonomic functional reaction (AU). The sensitivity control is AUL, and VV9 determines the range.
    VVR = VV9-AU*AUL+AUL;
    // value: AU42: A step to reduce the output effect of normal autonomic reaction (AU) equal to zero (AUO) so that differences from control levels can be activated in Blocks 43, 45, 47, 50, and 53.
    AUO = AU-1{dimensionless};
    // value: AU43 and AU44: Sensitivity control for the autonomic effect on the heart (AUH). The sensitivity is controlled by AUV.
    AUH = AUO*AUV+1{dimensionless};
    // value: AU45 and AU46: Sensitivity control of the autonomic effect on heart rate (AUR). The sensitivity is controlled by AUS.
    AUR = AUO*AUS+1{dimensionless};
    // value: AU47 and AU48: Calculation of the autonomic effect on muscle metabolism (AOM). The sensitivity control for this variable is O2A.
    AOM = AUO*O2A+1{dimensionless};
    // value: AU50, AU51, and AU52: Calculation of an autonomic multiplier effect that is used at multiple points in the circulatory system (AUM). The values AUM1 and AUM2 are curve fitting controls.
    AUM = pow(AUO*AUM1+1{dimensionless}, AUM2);
    // value: AU53 and AU54: Sensitivity control for adjusting the autonomic multiplier effect on the venous tree (AVE). The variable (AUY) controls the sensitivity.
    AVE = AUO*AUY+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between autonomic_drive_on_target_organs_and_tissues and actual_autonomic_stimulation for
    vars AU and AU;
  enddef;
  // PARAMETER CONNECTIONS
  def map between autonomic_drive_on_target_organs_and_tissues and autonomics_parameter_values for
    vars VV9 and VV9;
    vars AUL and AUL;
    vars AUV and AUV;
    vars AUS and AUS;
    vars O2A and O2A;
    vars AUM1 and AUM1;
    vars AUM2 and AUM2;
    vars AUY and AUY;
  enddef;
  // ===================================================	AUTONOMICS PARAMETER VALUES	=====================================================

  def comp autonomics_parameter_values as
    var VV9: litre {init: 2.51, priv: none, pub: out};
    // basic venous volume, without autonomic drive [P]
    var AUL: litre {init: 1.5, priv: none, pub: out};
    // curve fitting coefficient, calculation VVR [P]
    var AULPM: dimensionless {init: 0, priv: none, pub: out};
    // sensitivity controller of AULP [P]
    var AUY: dimensionless {init: 0, priv: none, pub: out};
    // sensitivity of sympathetic control of veins
    var AUV: dimensionless {init: 0.55, priv: none, pub: out};
    // blood volume shifted from unstressed to stressed
    var AUS: dimensionless {init: 1, priv: none, pub: out};
    // sensitivity of sympathetic control of heart rate [P]
    var O2A: dimensionless {init: 0.1, priv: none, pub: out};
    // sensitivity controller of AOM, autonomic on metabolism [P]
    var AUM1: dimensionless {init: 3, priv: none, pub: out};
    // curve fitting coefficient, calculation AUM [P]
    var AUM2: dimensionless {init: 1, priv: none, pub: out};
    // curve fitting exponent, calculation AUM [P]
    var AUDMP: minute {init: 0.3, priv: none, pub: out};
    // damping factor for AU1 [P]
    var AUMAX: dimensionless {init: 5.0, priv: none, pub: out};
    // maximal autonomic output [P]
    var AUMIN: dimensionless {init: 0.4, priv: none, pub: out};
    // minimal autonomic output [P]
    var AUSLP: dimensionless {init: 1.5, priv: none, pub: out};
    // curve fitting coefficient, calculation AU [P]
    var EXC: dimensionless {init: 1, priv: none, pub: out};
    // level of exercise activity [P]
    var EXCML: dimensionless {init: 0.01, priv: none, pub: out};
    // sensitivity controller of exercise on autonomics [P]
    var EXCXP: dimensionless {init: 1.0, priv: none, pub: out};
    // curve fitting exponent, autonomic effect of exercise [P]
    var AUN1: dimensionless {init: 0.5, priv: none, pub: out};
    // sensitivity controller of AUN [P]
    var MDMP: dimensionless {init: 0, priv: none, pub: out};
    // damping factor of AU6 [P]
    var BAROTC: minute {init: 0.16, priv: none, pub: out};
    // time constant, baroreceptor (AU6) [P]
    var AUK: per_minute {init: 0.004, priv: none, pub: out};
    // time constant of baroreceptor adaptation [P]
    var AUX: dimensionless {init: 1, priv: none, pub: out};
    // sensitivity controller of arterial baroreceptors [P]
    var O2CHMO: per_mmHg {init: 0.01, priv: none, pub: out};
    // O2 chemoreceptors sensitivity controller [P]
    var AUC1: dimensionless {init: 0.3, priv: none, pub: out};
    // sensitivity controller of AUC [P]
    var CRRFLX: mmHg {init: 0, priv: none, pub: out};
    // overriding value of PA1 (if > 0) [P]
    var EXE: mmHg {init: 0, priv: none, pub: out};
    // driving pressure on autonomic due to exercise [P]
  enddef;
  // ============================================================================================================================================================
  // ========================================================	CAPILLARY DYNAMICS MODEL	===========================================================

  // value: CAPILLARY DYNAMICS, TISSUE FLUID, AND TISSUE PROTEIN This portion of the model calculates the movement of fluid and protein through the capillary membrane. It also calculates the volumes of fluid in the free fluid space of the interstitium and in the gel fluid space. It calculates the pressures in both of these fluids as well as the so-called solid tissue pressure caused by the compression of solid elements against other portions of the interstitium. In addition, the quantities of proteins and their concentrations in both the free fluid and the gel fluid are calculated. And, finally, the flow of both fluid and proteins in the lymph system are computed, as well as the overall body protein balance. Encapsulation grouping component containing all the components in the Capillary Dynamics Model. The inputs and outputs of the Capillary Dynamics Model must be passed by this component.
  def comp capillary_dynamics as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var VEC: litre {priv: out, pub: in};
    var PPD: gram_per_minute {priv: out, pub: in};
    var RVS: mmHg_minute_per_L {priv: out, pub: in};
    var DFP: L_per_minute {priv: out, pub: in};
    var VPF: litre {priv: out, pub: in};
    var BFN: L_per_minute {priv: out, pub: in};
    var PVS: mmHg {priv: out, pub: in};
    // Outputs to components in other models
    var PC: mmHg {priv: in, pub: out};
    var CPP: gram_per_L {priv: in, pub: out};
    var PPC: mmHg {priv: in, pub: out};
    var VP: litre {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  // <connection>
  // 	<map_components component_1="capillary_dynamics" component_2="capillary_pressure"/>
  // 	<map_variables variable_1="PC" variable_2="PC"/>
  // </connection>
  def map between capillary_dynamics and plasma_protein_concentration for
    vars CPP and CPP;
  enddef;
  def map between capillary_dynamics and plasma_colloid_osmotic_pressure for
    vars PPC and PPC;
  enddef;
  // <connection>
  // 	<map_components component_1="capillary_dynamics" component_2="plasma_volume"/>
  // 	<map_variables variable_1="VP" variable_2="VP"/>
  // </connection>
  // ========================================	CAPILLARY MEMBRANE DYNAMICS	=============================================

  // value: Containment grouping component for "capillary_pressure" and "rate_of_fluid_out_of_capillaries".
  def comp capillary_membrane_dynamics as
  enddef;
  // ========================================	CAPILLARY PRESSURE		=============================================

  // value: CP1 and CP2: The capillary pressure (PC) is equal to the resistance to blood flow in the small veins (RVS) times the blood flow in the small veins (BFN), times a constant to represent the additional normal flow through the muscles and kidneys, plus the pressure in the large vein circulation. The value of the capillary pressure (PC) is assumed to be the same in all tissues of the body.
  def comp capillary_pressure as
    // Inputs from other components
    var RVS: mmHg_minute_per_L {priv: none, pub: in};
    var BFN: L_per_minute {priv: none, pub: in};
    var PVS: mmHg {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var PC: mmHg {priv: none, pub: out};
    // value: CP1 and CP2: The capillary pressure (PC) is equal to the resistance to blood flow in the small veins (RVS) times the blood flow in the small veins (BFN), times a constant to represent the additional normal flow through the muscles and kidneys, plus the pressure in the large vein circulation. The value of the capillary pressure (PC) is assumed to be the same in all tissues of the body.
    PC = RVS*1.7{dimensionless}*BFN+PVS;
  enddef;
  // INPUT CONNECTIONS
  def map between capillary_pressure and capillary_dynamics for
    vars PC and PC;
    vars RVS and RVS;
    vars BFN and BFN;
    vars PVS and PVS;
    vars time and time;
  enddef;
  // ========================================	RATE OF FLUID OUT OF CAPILLARIES	=============================================

  // value: CP3: The pressure gradient for filtration of fluid across the capillary membranes (PCGR) is equal to the capillary pressure (PC), plus the colloid osmotic pressure of the tissue gel (PTC), minus the plasma colloid osmotic pressure (PPC), minus the hydrostatic pressure of the gel (PGH). CP4: The rate of filtration of fluid out of the capillaries of the systemic circulation (CFILTR) is equal to the pressure gradient across the capillary membranes (PCGR) times the capillary filtration coefficient (CFC). CP5: The total rate of movement of fluid out of all the systemic capillaries of the body (VTC) is equal to the rate of filtration from the systemic capillaries (CFILTR) plus the rate of leakage of whole plasma though leaky capillaries (VTCPL).
  def comp rate_of_fluid_out_of_capillaries as
    // Inputs from other components
    var PC: mmHg {priv: none, pub: in};
    var PGH: mmHg {priv: none, pub: in};
    var PTC: mmHg {priv: none, pub: in};
    var PPC: mmHg {priv: none, pub: in};
    var VTCPL: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var VTC: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var CFC: L_per_minute_per_mmHg {priv: none, pub: in};
    // value: CP3: The pressure gradient for filtration of fluid across the capillary membranes (PCGR) is equal to the capillary pressure (PC), plus the colloid osmotic pressure of the tissue gel (PTC), minus the plasma colloid osmotic pressure (PPC), minus the hydrostatic pressure of the gel (PGH). CP4: The rate of filtration of fluid out of the capillaries of the systemic circulation (CFILTR) is equal to the pressure gradient across the capillary membranes (PCGR) times the capillary filtration coefficient (CFC). CP5: The total rate of movement of fluid out of all the systemic capillaries of the body (VTC) is equal to the rate of filtration from the systemic capillaries (CFILTR) plus the rate of leakage of whole plasma though leaky capillaries (VTCPL).
    VTC = (PC-PPC-PGH+PTC)*CFC+VTCPL;
  enddef;
  // INPUT CONNECTIONS
  def map between rate_of_fluid_out_of_capillaries and capillary_pressure for
    vars PC and PC;
  enddef;
  def map between rate_of_fluid_out_of_capillaries and hydrostatic_pressure_of_tissue_gel for
    vars PGH and PGH;
  enddef;
  def map between rate_of_fluid_out_of_capillaries and total_osmotic_pressure_of_tissue_gel for
    vars PTC and PTC;
  enddef;
  def map between rate_of_fluid_out_of_capillaries and plasma_colloid_osmotic_pressure for
    vars PPC and PPC;
  enddef;
  def map between rate_of_fluid_out_of_capillaries and plasma_leakage for
    vars VTCPL and VTCPL;
  enddef;
  // PARAMETER CONNECTIONS
  def map between rate_of_fluid_out_of_capillaries and capillary_dynamics_parameter_values for
    vars CFC and CFC;
  enddef;
  // ========================================	PLASMA VOLUME AND PROTEIN	=============================================

  // value: Containment grouping component for "plasma_volume", "plasma_protein_concentration", "protein_destruction_and_formation", "plasma_leakage", "protein_influx_into_interstitium", "total_plasma_protein" and "plasma_colloid_osmotic_pressure".
  def comp plasma_volume_and_protein as
  enddef;
  // ========================================	PLASMA VOLUME	=============================================

  // value: CP10: The rate of change of plasma volume (VPD) is equal to the rate of inflow of fluid into the plasma by way of the lymph (VTL) minus the rate of loss of fluid from the systemic tissue capillaries (VTC), minus the rate of loss of fluid from the pulmonary capillaries (DFP), and plus any rate of transfusion of plasma into the circulation. CP11: The plasma volume (VP) is determined by integrating the rate of change of the plasma volume (VPD) with respect to time.
  def comp plasma_volume as
    // Inputs from other components
    var DFP: L_per_minute {priv: none, pub: in};
    var VTC: L_per_minute {priv: none, pub: in};
    var VTL: L_per_minute {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VP: litre {init: 3.00449, priv: none, pub: out};
    // Parameters from parameter_file
    var TRPL: L_per_minute {priv: none, pub: in};
    // Internal variables
    var VPD: L_per_minute {priv: none, pub: none};
    // value: CP10: The rate of change of plasma volume (VPD) is equal to the rate of inflow of fluid into the plasma by way of the lymph (VTL) minus the rate of loss of fluid from the systemic tissue capillaries (VTC), minus the rate of loss of fluid from the pulmonary capillaries (DFP), and plus any rate of transfusion of plasma into the circulation.
    VPD = VTL-VTC-DFP+TRPL;
    // value: CP11: The plasma volume (VP) is determined by integrating the rate of change of the plasma volume (VPD) with respect to time.
    ode(VP, time) = VPD;
  enddef;
  // INPUT CONNECTIONS
  def map between plasma_volume and capillary_dynamics for
    vars VP and VP;
    vars DFP and DFP;
    vars time and time;
  enddef;
  def map between plasma_volume and rate_of_fluid_out_of_capillaries for
    vars VTC and VTC;
  enddef;
  def map between plasma_volume and lymph_flow for
    vars VTL and VTL;
  enddef;
  // PARAMETER CONNECTIONS
  def map between plasma_volume and capillary_dynamics_parameter_values for
    vars TRPL and TRPL;
  enddef;
  // ========================================	PLASMA PROTEIN CONCENTRATION	=============================================

  // value: CP35: The concentration of protein in the plasma (CPP) is equal to the total quantity of protein in the plasma (RPR) divided by the plasma volume (VP).
  def comp plasma_protein_concentration as
    // Inputs from other components
    var PRP: gram {priv: none, pub: in};
    var VP: litre {priv: none, pub: in};
    // Outputs to other components
    var CPP: gram_per_L {priv: none, pub: out};
    // value: CP35: The concentration of protein in the plasma (CPP) is equal to the total quantity of protein in the plasma (RPR) divided by the plasma volume (VP).
    CPP = PRP/VP;
  enddef;
  // INPUT CONNECTIONS
  def map between plasma_protein_concentration and total_plasma_protein for
    vars PRP and PRP;
  enddef;
  def map between plasma_protein_concentration and plasma_volume for
    vars VP and VP;
  enddef;
  // ========================================	PROTEIN DESTRUCTION AND FORMATION	=============================================

  // value: CP37 and CP38: A factor related to the rate of destruction of protein by the liver (CPPD) is equal to plasma protein concentration CPP) minus a critical protein limiting value (CPR). Block CP38 limits the rate of destruction of protein by the liver to a lower limit of zero. CP39 and CP40: Curve-fitting blocks to calculate the rate of destruction of protein by the liver (LPPRDS) from the factor (CPPD) calculated in Block 37. The curve-fitting constants are LPDE and LPK. CP41: Net rate of protein exchange between the liver and the plasma (DLP) is equal to the rate of production of protein by the liver (LPPR) minus the rate of destruction of protein by the liver (LPPRDS).
  def comp protein_destruction_and_formation as
    // Inputs from other components
    var CPP: gram_per_L {priv: none, pub: in};
    // Outputs to other components
    var DLP: gram_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var CPR: gram_per_L {priv: none, pub: in};
    var LPPR: gram_per_minute {priv: none, pub: in};
    var LPDE: dimensionless {priv: none, pub: in};
    var LPK: L_per_minute {priv: none, pub: in};
    // Internal variables
    var CPPD: gram_per_L {priv: none, pub: none};
    // value: CP37 and CP38: A factor related to the rate of destruction of protein by the liver (CPPD) is equal to plasma protein concentration CPP) minus a critical protein limiting value (CPR). Block CP38 limits the rate of destruction of protein by the liver to a lower limit of zero.
    CPPD = sel
      case CPP-CPR < 0{gram_per_L}:
        0{gram_per_L};
      otherwise:
        CPP-CPR;
    endsel;
    // value: CP39 and CP40: Curve-fitting blocks to calculate the rate of destruction of protein by the liver (LPPRDS) from the factor (CPPD) calculated in Block 37. The curve-fitting constants are LPDE and LPK. CP41: Net rate of protein exchange between the liver and the plasma (DLP) is equal to the rate of production of protein by the liver (LPPR) minus the rate of destruction of protein by the liver (LPPRDS).
    DLP = LPPR-pow(CPPD, LPDE)*LPK;
  enddef;
  // INPUT CONNECTIONS
  def map between protein_destruction_and_formation and plasma_protein_concentration for
    vars CPP and CPP;
  enddef;
  // PARAMETER CONNECTIONS
  def map between protein_destruction_and_formation and capillary_dynamics_parameter_values for
    vars CPR and CPR;
    vars LPPR and LPPR;
    vars LPDE and LPDE;
    vars LPK and LPK;
  enddef;
  // ========================================	PLASMA LEAKAGE	=============================================

  // value: CP25 and CP26: Calculation of a pressure gradient to cause whole plasma leakage through the capillary membranes (PRCD), calculated by adding the capillary pressure (PC) and subtracting a critical capillary pressure (PCR) below which no whole plasma will leak. Block CP26 limits the rate of plasma leakage (PRCD) to a lower level of zero. CP27 and CP28: The rate of leakage of whole plasma through the capillary membrane (VTCPL) is equal to the pressure gradient for leakage of plasma (PRCD) times a constant (CPK) and this product raised to a power (PCE).
  def comp plasma_leakage as
    // Inputs from other components
    var PC: mmHg {priv: none, pub: in};
    // Outputs to other components
    var VTCPL: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var PCR: mmHg {priv: none, pub: in};
    var CPK: L_per_minute_per_mmHg {priv: none, pub: in};
    var PCE: dimensionless {priv: none, pub: in};
    // Internal variables
    var PRCD: mmHg {priv: none, pub: none};
    // value: CP25 and CP26: Calculation of a pressure gradient to cause whole plasma leakage through the capillary membranes (PRCD), calculated by adding the capillary pressure (PC) and subtracting a critical capillary pressure (PCR) below which no whole plasma will leak. Block CP26 limits the rate of plasma leakage (PRCD) to a lower level of zero.
    PRCD = sel
      case PC-PCR < 0{mmHg}:
        0{mmHg};
      otherwise:
        PC-PCR;
    endsel;
    // value: CP27 and CP28: The rate of leakage of whole plasma through the capillary membrane (VTCPL) is equal to the pressure gradient for leakage of plasma (PRCD) times a constant (CPK) and this product raised to a power (PCE).
    VTCPL = pow(PRCD*CPK, PCE);
  enddef;
  // INPUT CONNECTIONS
  def map between plasma_leakage and capillary_pressure for
    vars PC and PC;
  enddef;
  // PARAMETER CONNECTIONS
  def map between plasma_leakage and capillary_dynamics_parameter_values for
    vars PCR and PCR;
    vars CPK and CPK;
    vars PCE and PCE;
  enddef;
  // ========================================	PROTEIN INFLUX INTO INTERSTITIUM	=============================================

  // value: CP29: Rate of leakage of plasma protein in the leaking whole plasma into the interstitium from the circulating plasma (TVCPL) equals the volume of plasma leaking (VTCPL) times the concentration of protein in the plasma (CPP). CP30 and CP31: The rate of diffusion of protein through the capillary pores (PLPRDF) is equal to the difference between plasma concentration of protein (CPP) minus the concentration of protein in the interstitial free fluid (CPI) times a constant in Block CP31. CP32: Rate of influx of protein into the interstitium from the plasma in the capillaries (DPC) is equal to the rate of protein leaking in the whole plasma (VTCPL) plus the rate of diffusion of protein through the capillary pores (PLPRDF).
  def comp protein_influx_into_interstitium as
    // Inputs from other components
    var VTCPL: L_per_minute {priv: none, pub: in};
    var CPP: gram_per_L {priv: none, pub: in};
    var CPI: gram_per_L {priv: none, pub: in};
    // Outputs to other components
    var DPC: gram_per_minute {priv: none, pub: out};
    // value: CP29: Rate of leakage of plasma protein in the leaking whole plasma into the interstitium from the circulating plasma (TVCPL) equals the volume of plasma leaking (VTCPL) times the concentration of protein in the plasma (CPP). CP30 and CP31: The rate of diffusion of protein through the capillary pores (PLPRDF) is equal to the difference between plasma concentration of protein (CPP) minus the concentration of protein in the interstitial free fluid (CPI) times a constant in Block CP31. CP32: Rate of influx of protein into the interstitium from the plasma in the capillaries (DPC) is equal to the rate of protein leaking in the whole plasma (VTCPL) plus the rate of diffusion of protein through the capillary pores (PLPRDF).
    DPC = VTCPL*CPP+(CPP-CPI)*0.00104{L_per_minute};
  enddef;
  // INPUT CONNECTIONS
  def map between protein_influx_into_interstitium and plasma_leakage for
    vars VTCPL and VTCPL;
  enddef;
  def map between protein_influx_into_interstitium and plasma_protein_concentration for
    vars CPP and CPP;
  enddef;
  def map between protein_influx_into_interstitium and interstitial_protein_concentration for
    vars CPI and CPI;
  enddef;
  // ========================================	TOTAL PLASMA PROTEIN	=============================================

  // value: CP33: The rate of change of the quantity of protein in the plasma (DPP) is equal to the net rate of formation of protein by the liver (DLP), plus the rate of return of protein to the circulation in the lymph (DPL), minus the loss of protein from the circulation into the systemic interstitium (DPC), minus the rate of loss of protein through the pulmonary capillary membranes (PPD). CP34: The total quantity of protein in the plasma (PRP) is determined by integrating the rate of change of the protein in the plasma (DPP) with respect to time.
  def comp total_plasma_protein as
    // Inputs from other components
    var DPC: gram_per_minute {priv: none, pub: in};
    var PPD: gram_per_minute {priv: none, pub: in};
    var DPL: gram_per_minute {priv: none, pub: in};
    var DLP: gram_per_minute {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var PRP: gram {init: 216.243, priv: none, pub: out};
    // Parameters from parameter_file
    var TRPL: L_per_minute {priv: none, pub: in};
    // Internal variables
    var DPP: gram_per_minute {priv: none, pub: none};
    // value: CP33: The rate of change of the quantity of protein in the plasma (DPP) is equal to the net rate of formation of protein by the liver (DLP), plus the rate of return of protein to the circulation in the lymph (DPL), minus the loss of protein from the circulation into the systemic interstitium (DPC), minus the rate of loss of protein through the pulmonary capillary membranes (PPD).
    DPP = DLP+DPL-DPC-PPD+TRPL*72{gram_per_L};
    // value: CP34: The total quantity of protein in the plasma (PRP) is determined by integrating the rate of change of the protein in the plasma (DPP) with respect to time.
    ode(PRP, time) = DPP;
  enddef;
  // INPUT CONNECTIONS
  def map between total_plasma_protein and protein_influx_into_interstitium for
    vars DPC and DPC;
  enddef;
  def map between total_plasma_protein and lymph_protein_flow for
    vars DPL and DPL;
  enddef;
  def map between total_plasma_protein and protein_destruction_and_formation for
    vars DLP and DLP;
  enddef;
  def map between total_plasma_protein and capillary_dynamics for
    vars PPD and PPD;
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between total_plasma_protein and capillary_dynamics_parameter_values for
    vars TRPL and TRPL;
  enddef;
  // ========================================	PLASMA COLLOID OSMOTIC PRESSURE		=============================================

  // value: CP36: The plasma colloid osmotic pressure (PPC) is calculated in this block from the concentration of protein in the plasma (CPP).
  def comp plasma_colloid_osmotic_pressure as
    // Inputs from other components
    var CPP: gram_per_L {priv: none, pub: in};
    // Outputs to other components
    var PPC: mmHg {priv: none, pub: out};
    // value: CP36: The plasma colloid osmotic pressure (PPC) is calculated in this block from the concentration of protein in the plasma (CPP).
    PPC = 0.28{L_mmHg_per_gram}*CPP+0.0019{L2_mmHg_per_gram2}*sqr(CPP);
  enddef;
  // INPUT CONNECTIONS
  def map between plasma_colloid_osmotic_pressure and plasma_protein_concentration for
    vars CPP and CPP;
  enddef;
  // ========================================	SYSTEMIC TISSUE FLUID VOLUME AND PROTEIN	=============================================

  // value: Containment grouping component for "total_systemic_fluid_volume", "interstitial_fluid_volume", "total_interstitial_protein", "interstitial_protein_concentration", "interstitial_colloid_osmotic_pressure" and "lymph_protein_flow".
  def comp systemic_tissue_fluid_volume_and_protein as
  enddef;
  // ========================================	TOTAL SYSTEMIC FLUID VOLUME		=============================================

  // value: CP6: The total fluid volume in the systemic circulation portion of the body (VTS) is equal to the total extracellular fluid volume (VEC) minus plasma volume (VP) and minus pulmonary extracellular fluid volume (VPF).
  def comp total_systemic_fluid_volume as
    // Inputs from other components
    var VEC: litre {priv: none, pub: in};
    var VP: litre {priv: none, pub: in};
    var VPF: litre {priv: none, pub: in};
    // Outputs to other components
    var VTS: litre {priv: none, pub: out};
    // value: CP6: The total fluid volume in the systemic circulation portion of the body (VTS) is equal to the total extracellular fluid volume (VEC) minus plasma volume (VP) and minus pulmonary extracellular fluid volume (VPF).
    VTS = VEC-VP-VPF;
  enddef;
  // INPUT CONNECTIONS
  def map between total_systemic_fluid_volume and capillary_dynamics for
    vars VEC and VEC;
    vars VPF and VPF;
  enddef;
  def map between total_systemic_fluid_volume and plasma_volume for
    vars VP and VP;
  enddef;
  // ========================================	INTERSTITIAL FLUID VOLUME	=============================================

  // value: CP7, CP7A, CP7B, CP7C, CP7D, and CP7E: Calculation of the effect of tissue space stress relaxation on volume of fluid in the interstitial space (VTS1) after higher or lower than normal volumes (VTS greater or lower than 12) have existed in the tissue spaces for prolonged periods of time. The sensitivity control for the extent of tissue space stress relaxation is TSSLML, and the reciprocal of the time constant of the effect is TSSLTC.
  def comp interstitial_fluid_volume as
    // Inputs from other components
    var VTS: litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VTS1: litre {priv: none, pub: out};
    // Parameters from parameter_file
    var TSSLML: dimensionless {priv: none, pub: in};
    var TSSLTC: per_minute {priv: none, pub: in};
    // Internal variables
    var VTS2: litre {init: 0.0, priv: none, pub: none};
    // value: CP7, CP7A, CP7B, CP7C, CP7D, and CP7E: Calculation of the effect of tissue space stress relaxation on volume of fluid in the interstitial space (VTS1) after higher or lower than normal volumes (VTS greater or lower than 12) have existed in the tissue spaces for prolonged periods of time. The sensitivity control for the extent of tissue space stress relaxation is TSSLML, and the reciprocal of the time constant of the effect is TSSLTC.
    ode(VTS2, time) = ((VTS-12{litre})*TSSLML-VTS2)*TSSLTC;
    // value: CP7, CP7A, CP7B, CP7C, CP7D, and CP7E: Calculation of the effect of tissue space stress relaxation on volume of fluid in the interstitial space (VTS1) after higher or lower than normal volumes (VTS greater or lower than 12) have existed in the tissue spaces for prolonged periods of time. The sensitivity control for the extent of tissue space stress relaxation is TSSLML, and the reciprocal of the time constant of the effect is TSSLTC.
    VTS1 = VTS-VTS2;
  enddef;
  // INPUT CONNECTIONS
  def map between interstitial_fluid_volume and total_systemic_fluid_volume for
    vars VTS and VTS;
  enddef;
  def map between interstitial_fluid_volume and capillary_dynamics for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between interstitial_fluid_volume and capillary_dynamics_parameter_values for
    vars TSSLML and TSSLML;
    vars TSSLTC and TSSLTC;
  enddef;
  // ========================================	TOTAL INTERSTITIAL PROTEIN	=============================================

  // value: CP42: The rate of change of protein in the systemic interstitium (DPI) is equal to the rate of leakage from the plasma of protein through the systemic capillary membranes (DPC) minus the rate of return of the protein from the systemic interstitium by way of the lymphatics (DPL). CP43: The total tissue protein (TSP) is calculated by integrating the rate of change of protein in the interstitium (DPI) with respect to time.
  def comp total_interstitial_protein as
    // Inputs from other components
    var DPC: gram_per_minute {priv: none, pub: in};
    var DPL: gram_per_minute {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var TSP: gram {init: 279.945, priv: none, pub: out};
    // Internal variables
    var DPI: gram_per_minute {priv: none, pub: none};
    // value: CP42: The rate of change of protein in the systemic interstitium (DPI) is equal to the rate of leakage from the plasma of protein through the systemic capillary membranes (DPC) minus the rate of return of the protein from the systemic interstitium by way of the lymphatics (DPL).
    DPI = DPC-DPL;
    // value: CP43: The total tissue protein (TSP) is calculated by integrating the rate of change of protein in the interstitium (DPI) with respect to time.
    ode(TSP, time) = DPI;
  enddef;
  // INPUT CONNECTIONS
  def map between total_interstitial_protein and lymph_protein_flow for
    vars DPL and DPL;
  enddef;
  def map between total_interstitial_protein and protein_influx_into_interstitium for
    vars DPC and DPC;
  enddef;
  def map between total_interstitial_protein and capillary_dynamics for
    vars time and time;
  enddef;
  // ========================================	INTERSTITIAL PROTEIN CONCENTRATION		=============================================

  // value: CP44: The concentration of protein in the interstitium (CPI) is equal to the total quantity of protein in the interstitium (TSP) divided by the total volume of fluid in the systemic interstitium (VTS).
  def comp interstitial_protein_concentration as
    // Inputs from other components
    var TSP: gram {priv: none, pub: in};
    var VTS: litre {priv: none, pub: in};
    // Outputs to other components
    var CPI: gram_per_L {priv: none, pub: out};
    // value: CP44: The concentration of protein in the interstitium (CPI) is equal to the total quantity of protein in the interstitium (TSP) divided by the total volume of fluid in the systemic interstitium (VTS).
    CPI = TSP/VTS;
  enddef;
  // INPUT CONNECTIONS
  def map between interstitial_protein_concentration and total_interstitial_protein for
    vars TSP and TSP;
  enddef;
  def map between interstitial_protein_concentration and total_systemic_fluid_volume for
    vars VTS and VTS;
  enddef;
  // ========================================	INTERSTITIAL COLLOID OSMOTIC PRESSURE	=============================================

  // value: CP45: The colloid osmotic pressure of the free fluid in the interstitium (PTCPR) is calculated in this block from the concentration of protein in the interstitium (CPI).
  def comp interstitial_colloid_osmotic_pressure as
    // Inputs from other components
    var CPI: gram_per_L {priv: none, pub: in};
    // Outputs to other components
    var PTCPR: mmHg {priv: none, pub: out};
    // value: CP45: The colloid osmotic pressure of the free fluid in the interstitium (PTCPR) is calculated in this block from the concentration of protein in the interstitium (CPI).
    PTCPR = 0.28{L_mmHg_per_gram}*CPI+0.0019{L2_mmHg_per_gram2}*sqr(CPI);
  enddef;
  // INPUT CONNECTIONS
  def map between interstitial_colloid_osmotic_pressure and interstitial_protein_concentration for
    vars CPI and CPI;
  enddef;
  // ========================================	LYMPH PROTEIN FLOW	=============================================

  // value: CP46: The rate of return of protein to the circulation by way of the lymph (DPL) is equal to the concentration of protein in the systemic interstitium (CPI) times the rate of lymph flow from the interstitium (VTL).
  def comp lymph_protein_flow as
    // Inputs from other components
    var CPI: gram_per_L {priv: none, pub: in};
    var VTL: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var DPL: gram_per_minute {priv: none, pub: out};
    // value: CP46: The rate of return of protein to the circulation by way of the lymph (DPL) is equal to the concentration of protein in the systemic interstitium (CPI) times the rate of lymph flow from the interstitium (VTL).
    DPL = CPI*VTL;
  enddef;
  // INPUT CONNECTIONS
  def map between lymph_protein_flow and interstitial_protein_concentration for
    vars CPI and CPI;
  enddef;
  def map between lymph_protein_flow and lymph_flow for
    vars VTL and VTL;
  enddef;
  // ========================================	TISSUE GEL AND FLUID, AND LYMPH FLOW	=============================================

  // value: Containment grouping component for "hydrostatic_pressure_of_tissue_gel", "total_osmotic_pressure_of_tissue_gel", "total_tissue_pressure", "interstial_free_fluid_pressure", "interstitial_solid_tissue_pressure", "lymph_flow", "interstitial_gel_volume" and "interstitial_free_fluid_volume".
  def comp tissue_gel_and_fluid_and_lymph_flow as
  enddef;
  // ========================================	HYDROSTATIC PRESSURE OF TISSUE GEL	=============================================

  // value: CP13 and CP14: Calculation of the concentration of hyaluronic acid in the interstitium (CHY) from the total quantity of hyaluronic acid in the interstitium (HYL) and the total volume of fluid in the interstitium (VTS). The exponent CMPTSS describes the non-linearity of this effect. CP15 and CP16: Calculation of the hydrostatic pressure in the tissue gel (PGH) from the concentration of hyaluronic acid in the interstitium (CHY) and the total tissue pressure (PTT). (The hyaluronic acid acts as an elastic body that expands, and, therefore, creates a negative pressure.)
  def comp hydrostatic_pressure_of_tissue_gel as
    // Inputs from other components
    var VTS: litre {priv: none, pub: in};
    var PTT: mmHg {priv: none, pub: in};
    // Outputs to other components
    var CHY: gram_per_L {priv: none, pub: out};
    var PGH: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var HYL: gram {priv: none, pub: in};
    var CMPTSS: dimensionless {priv: none, pub: in};
    var PGHF: L_mmHg_per_gram {priv: none, pub: in};
    // value: CP13 and CP14: Calculation of the concentration of hyaluronic acid in the interstitium (CHY) from the total quantity of hyaluronic acid in the interstitium (HYL) and the total volume of fluid in the interstitium (VTS). The exponent CMPTSS describes the non-linearity of this effect.
    CHY = pow(HYL/VTS/5{dimensionless}, CMPTSS);
    // value: CP15 and CP16: Calculation of the hydrostatic pressure in the tissue gel (PGH) from the concentration of hyaluronic acid in the interstitium (CHY) and the total tissue pressure (PTT). (The hyaluronic acid acts as an elastic body that expands, and, therefore, creates a negative pressure.)
    PGH = CHY*PGHF+PTT;
  enddef;
  // INPUT CONNECTIONS
  def map between hydrostatic_pressure_of_tissue_gel and total_tissue_pressure for
    vars PTT and PTT;
  enddef;
  def map between hydrostatic_pressure_of_tissue_gel and total_systemic_fluid_volume for
    vars VTS and VTS;
  enddef;
  // PARAMETER CONNECTIONS
  def map between hydrostatic_pressure_of_tissue_gel and capillary_dynamics_parameter_values for
    vars HYL and HYL;
    vars CMPTSS and CMPTSS;
    vars PGHF and PGHF;
  enddef;
  // ========================================	TOTAL OSMOTIC PRESSURE OF TISSUE GEL	=============================================

  // value: CP17: The osmotic pressure caused by the hyaluronic acid in the gel (POSHYL) is equal to the concentration of hyaluronic acid in the gel (CHY) times a constant. CP18: The total osmotic pressure of the tissue gel (PTC) is equal to the osmotic pressure caused by the hyaluronic acid in the gel (POSHYL) times the colloid osmotic pressure caused by the plasma protein in the free fluid of the interstitium (PTCPR) times a constant (GCOPF).
  def comp total_osmotic_pressure_of_tissue_gel as
    // Inputs from other components
    var CHY: gram_per_L {priv: none, pub: in};
    var PTCPR: mmHg {priv: none, pub: in};
    // Outputs to other components
    var POSHYL: mmHg {priv: none, pub: out};
    var PTC: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var GCOPF: per_mmHg {priv: none, pub: in};
    // value: CP17: The osmotic pressure caused by the hyaluronic acid in the gel (POSHYL) is equal to the concentration of hyaluronic acid in the gel (CHY) times a constant.
    POSHYL = CHY*2{L_mmHg_per_gram};
    // value: CP18: The total osmotic pressure of the tissue gel (PTC) is equal to the osmotic pressure caused by the hyaluronic acid in the gel (POSHYL) times the colloid osmotic pressure caused by the plasma protein in the free fluid of the interstitium (PTCPR) times a constant (GCOPF).
    PTC = POSHYL*PTCPR*GCOPF;
  enddef;
  // INPUT CONNECTIONS
  def map between total_osmotic_pressure_of_tissue_gel and hydrostatic_pressure_of_tissue_gel for
    vars CHY and CHY;
  enddef;
  def map between total_osmotic_pressure_of_tissue_gel and interstitial_colloid_osmotic_pressure for
    vars PTCPR and PTCPR;
  enddef;
  // PARAMETER CONNECTIONS
  def map between total_osmotic_pressure_of_tissue_gel and capillary_dynamics_parameter_values for
    vars GCOPF and GCOPF;
  enddef;
  // ========================================	TOTAL TISSUE PRESSURE	=============================================

  // value: CP12: Calculation of the total tissue pressure (PTT) as a function of the total interstitial fluid volume (VTS1).
  def comp total_tissue_pressure as
    // Inputs from other components
    var VTS1: litre {priv: none, pub: in};
    // Outputs to other components
    var PTT: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var VTSF: litre {priv: none, pub: in};
    // value: CP12: Calculation of the total tissue pressure (PTT) as a function of the total interstitial fluid volume (VTS1).
    PTT = sqr((VTS1-VTSF)/VTSF)*1{mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between total_tissue_pressure and interstitial_fluid_volume for
    vars VTS1 and VTS1;
  enddef;
  // PARAMETER CONNECTIONS
  def map between total_tissue_pressure and capillary_dynamics_parameter_values for
    vars VTSF and VTSF;
  enddef;
  // ========================================	INTERSTITIAL FREE FLUID PRESSURE	=============================================

  // value: CP19: The pressure in the free interstitial fluid (PIF) is equal to the hydrostatic pressure in the tissue gel (PGH) minus the colloid osmotic pressure of the hyaluronic acid in the tissue gel (POSHYL).
  def comp interstial_free_fluid_pressure as
    // Inputs from other components
    var PGH: mmHg {priv: none, pub: in};
    var POSHYL: mmHg {priv: none, pub: in};
    // Outputs to other components
    var PIF: mmHg {priv: none, pub: out};
    // value: CP19: The pressure in the free interstitial fluid (PIF) is equal to the hydrostatic pressure in the tissue gel (PGH) minus the colloid osmotic pressure of the hyaluronic acid in the tissue gel (POSHYL).
    PIF = PGH-POSHYL;
  enddef;
  // INPUT CONNECTIONS
  def map between interstial_free_fluid_pressure and total_osmotic_pressure_of_tissue_gel for
    vars POSHYL and POSHYL;
  enddef;
  def map between interstial_free_fluid_pressure and hydrostatic_pressure_of_tissue_gel for
    vars PGH and PGH;
  enddef;
  // ========================================	INTERSTITIAL SOLID TISSUE PRESSURE	=============================================

  // value: CP20: The solid tissue pressure of the interstitium (PTS) is equal to the total tissue pressure (PTT) minus the pressure in the free fluid of the interstitium (PIF).
  def comp interstitial_solid_tissue_pressure as
    // Inputs from other components
    var PIF: mmHg {priv: none, pub: in};
    var PTT: mmHg {priv: none, pub: in};
    // Outputs to other components
    var PTS: mmHg {priv: none, pub: out};
    // value: CP20: The solid tissue pressure of the interstitium (PTS) is equal to the total tissue pressure (PTT) minus the pressure in the free fluid of the interstitium (PIF).
    PTS = PTT-PIF;
  enddef;
  // INPUT CONNECTIONS
  def map between interstitial_solid_tissue_pressure and interstial_free_fluid_pressure for
    vars PIF and PIF;
  enddef;
  def map between interstitial_solid_tissue_pressure and total_tissue_pressure for
    vars PTT and PTT;
  enddef;
  // ========================================	LYMPH FLOW	=============================================

  // value: CP21 and CP22: The pressure gradient that promotes lymph flow (PLD) is equal to a constant (PLDF) that is determined by the pumping action of the lymphatics plus the interstitial free fluid pressure (PIF), minus the total tissue pressure (PTT). Block CP22 limits the upper level of this pressure gradient. CP23 and CP24: The rate of lymph flow (VTL) is equal to the pressure gradient that causes lymph flow (PLD) times a constant representing lymphatic conductance. Block CP24 limits the lower level of lymph flow to zero.
  def comp lymph_flow as
    // Inputs from other components
    var PIF: mmHg {priv: none, pub: in};
    var PTT: mmHg {priv: none, pub: in};
    // Outputs to other components
    var VTL: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var PLDF: mmHg {priv: none, pub: in};
    // Internal variables
    var PLD1: mmHg {priv: none, pub: none};
    var PLD: mmHg {priv: none, pub: none};
    // value: CP21: The pressure gradient that promotes lymph flow (PLD) is equal to a constant (PLDF) that is determined by the pumping action of the lymphatics plus the interstitial free fluid pressure (PIF), minus the total tissue pressure (PTT).
    PLD1 = PIF+PLDF-PTT;
    // value: CP22: Block CP22 limits the upper level of this pressure gradient.
    PLD = sel
      case PLD1 > 7{mmHg}:
        7{mmHg};
      otherwise:
        PLD1;
    endsel;
    // value: ] CP23 and CP24: The rate of lymph flow (VTL) is equal to the pressure gradient that causes lymph flow (PLD) times a constant representing lymphatic conductance. Block CP24 limits the lower level of lymph flow to zero.
    VTL = sel
      case PLD < 0{mmHg}:
        0{L_per_minute};
      otherwise:
        PLD*0.02{L_per_minute_per_mmHg};
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between lymph_flow and interstial_free_fluid_pressure for
    vars PIF and PIF;
  enddef;
  def map between lymph_flow and total_tissue_pressure for
    vars PTT and PTT;
  enddef;
  // PARAMETER CONNECTIONS
  def map between lymph_flow and capillary_dynamics_parameter_values for
    vars PLDF and PLDF;
  enddef;
  // ========================================	INTERSTITIAL GEL VOLUME	=============================================

  // value: CP8: This block gives a function curve that relates the volume of the tissue gel (VG) to the total interstitial fluid volume (VTS).
  def comp interstitial_gel_volume as
    // Inputs from other components
    var VTS: litre {priv: none, pub: in};
    // Outputs to other components
    var VG: litre {priv: none, pub: out};
    // value: CP8: This block gives a function curve that relates the volume of the tissue gel (VG) to the total interstitial fluid volume (VTS).
    VG = sel
      case VTS <= 0{litre}:
        0{litre};
      case (VTS > 0{litre}) and (VTS <= 12{litre}):
        0{litre}+(11.4{dimensionless}-0{dimensionless})*(VTS-0{litre})/(12{dimensionless}-0{dimensionless});
      case (VTS > 12{litre}) and (VTS <= 15{litre}):
        11.4{litre}+(14{dimensionless}-11.4{dimensionless})*(VTS-12{litre})/(15{dimensionless}-12{dimensionless});
      case (VTS > 15{litre}) and (VTS <= 18{litre}):
        14{litre}+(16{dimensionless}-14{dimensionless})*(VTS-15{litre})/(18{dimensionless}-15{dimensionless});
      case (VTS > 18{litre}) and (VTS <= 21{litre}):
        16{litre}+(17.3{dimensionless}-16{dimensionless})*(VTS-18{litre})/(21{dimensionless}-18{dimensionless});
      case (VTS > 21{litre}) and (VTS <= 24{litre}):
        17.3{litre}+(18{dimensionless}-17.3{dimensionless})*(VTS-21{litre})/(24{dimensionless}-21{dimensionless});
      otherwise:
        18{litre};
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between interstitial_gel_volume and total_systemic_fluid_volume for
    vars VTS and VTS;
  enddef;
  // ========================================	INTERSTITIAL FREE FLUID VOLUME	=============================================

  // value: CP9: The volume of free fluid in the interstitium (VIF) is equal to the total interstitial fluid volume (VTS) minus the volume of fluid in the tissue gel (VG).
  def comp interstitial_free_fluid_volume as
    // Inputs from other components
    var VTS: litre {priv: none, pub: in};
    var VG: litre {priv: none, pub: in};
    // Outputs to other components
    var VIF: litre {priv: none, pub: out};
    // value: CP9: The volume of free fluid in the interstitium (VIF) is equal to the total interstitial fluid volume (VTS) minus the volume of fluid in the tissue gel (VG).
    VIF = VTS-VG;
  enddef;
  // INPUT CONNECTIONS
  def map between interstitial_free_fluid_volume and total_systemic_fluid_volume for
    vars VTS and VTS;
  enddef;
  def map between interstitial_free_fluid_volume and interstitial_gel_volume for
    vars VG and VG;
  enddef;
  // =================================================		CAPILLARY DYNAMICS PARAMETER VALUES		==========================================

  def comp capillary_dynamics_parameter_values as
    var CFC: L_per_minute_per_mmHg {init: 0.01167, priv: none, pub: out};
    // capillary filtration coefficient [P]
    var TRPL: L_per_minute {init: 0, priv: none, pub: out};
    // transfusion coefficient [P]
    var CPR: gram_per_L {init: 40, priv: none, pub: out};
    // critical plasma protein conc for protein destruction [P]
    var LPDE: dimensionless {init: 8, priv: none, pub: out};
    // curve fitting coefficient, liver protein destruction [P]
    var PCE: dimensionless {init: 1, priv: none, pub: out};
    // curve fitting exponent, capillary leakage [P]
    var PCR: mmHg {init: 15, priv: none, pub: out};
    // critical capillary pressure for protein leakage [P]
    var LPK: L_per_minute {init: 2.728e-14, priv: none, pub: out};
    // curve fitting coefficient, liver protein destruction [P]
    var LPPR: gram_per_minute {init: 0.03, priv: none, pub: out};
    // rate of liver protein production [P]
    var CPK: L_per_minute_per_mmHg {init: 0.000253, priv: none, pub: out};
    // curve fitting exponent, , capillary leakage [P]
    var TSSLML: dimensionless {init: 0.15, priv: none, pub: out};
    // sensitivity controller of VTS [P]
    var TSSLTC: per_minute {init: 0.005, priv: none, pub: out};
    // VTS1 time constant [P]
    var HYL: gram {init: 60, priv: none, pub: out};
    // quantity of hyaluronic acid in tissues
    var CMPTSS: dimensionless {init: 2, priv: none, pub: out};
    // curve fitting exponent, calculation of CHY [P]
    var PGHF: L_mmHg_per_gram {init: -2, priv: none, pub: out};
    // proportionality coefficent, CHY to PGH [P]
    var GCOPF: per_mmHg {init: 0.8092, priv: none, pub: out};
    // coefficient, calculation of PTC [P]
    var VTSF: litre {init: 6, priv: none, pub: out};
    // curve fitting coefficient, PTT [P]
    var PLDF: mmHg {init: 4.2, priv: none, pub: out};
    // constant pressure, computation of PLD [P]
  enddef;
  // ============================================================================================================================================================
  // ========================================================	CIRCULATORY DYNAMICS MODEL	===========================================================

  // value: This section calculates the flow of blood around the circuit from arteries, to veins, to heart, to lungs, and back to heart again. It also calculates the resistances and the effect of various factors on the resistances. In other words, this section presents the basic hemodynamics of the circulatory system. Encapsulation grouping component containing all the components in the Circulatory Dynamics Model. The inputs and outputs of the Circulatory Dynamics Model must be passed by this component.
  def comp circulatory_dynamics as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var ADHMV: dimensionless {priv: out, pub: in};
    var AMM: dimensionless {priv: out, pub: in};
    var ANU: dimensionless {priv: out, pub: in};
    var ANUVN: dimensionless {priv: out, pub: in};
    var ARM: dimensionless {priv: out, pub: in};
    var ATRRFB: dimensionless {priv: out, pub: in};
    var ATRVFB: litre {priv: out, pub: in};
    var AU: dimensionless {priv: out, pub: in};
    var AUH: dimensionless {priv: out, pub: in};
    var AUM: dimensionless {priv: out, pub: in};
    var AVE: dimensionless {priv: out, pub: in};
    var HMD: dimensionless {priv: out, pub: in};
    var HPL: dimensionless {priv: out, pub: in};
    var HPR: dimensionless {priv: out, pub: in};
    var MYOGRS: dimensionless {priv: out, pub: in};
    var OSA: dimensionless {priv: out, pub: in};
    var PAMK: dimensionless {priv: out, pub: in};
    var PC: mmHg {priv: out, pub: in};
    var RBF: L_per_minute {priv: out, pub: in};
    var VIM: dimensionless {priv: out, pub: in};
    var VP: litre {priv: out, pub: in};
    var VRC: litre {priv: out, pub: in};
    var VV6: litre {priv: out, pub: in};
    var VV7: litre {priv: out, pub: in};
    var VVR: litre {priv: out, pub: in};
    // Outputs to components in other models
    var BFM: L_per_minute {priv: in, pub: out};
    var BFN: L_per_minute {priv: in, pub: out};
    var PA: mmHg {priv: in, pub: out};
    var PLA: mmHg {priv: in, pub: out};
    var PPA: mmHg {priv: in, pub: out};
    var PRA: mmHg {priv: in, pub: out};
    var PVS: mmHg {priv: in, pub: out};
    var QAO: L_per_minute {priv: in, pub: out};
    var QRO: L_per_minute {priv: in, pub: out};
    var QLO: L_per_minute {priv: in, pub: out};
    var RPA: mmHg_minute_per_L {priv: in, pub: out};
    var RPV: mmHg_minute_per_L {priv: in, pub: out};
    var RVS: mmHg_minute_per_L {priv: in, pub: out};
    var VVE: litre {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  def map between circulatory_dynamics and blood_flow_through_NM_NR_tissues for
    vars BFN and BFN;
  enddef;
  def map between circulatory_dynamics and blood_flow_through_M_tissues for
    vars BFM and BFM;
  enddef;
  def map between circulatory_dynamics and arterial_pressure_and_pressure_gradient for
    vars PA and PA;
  enddef;
  // <connection>
  // 	<map_components component_1="circulatory_dynamics" component_2="venous_resistance"/>
  // 	<map_variables variable_1="RVS" variable_2="RVS"/>
  // </connection>
  def map between circulatory_dynamics and venous_average_pressure for
    vars PVS and PVS;
  enddef;
  // <connection>
  // 	<map_components component_1="circulatory_dynamics" component_2="venous_excess_volume"/>
  // 	<map_variables variable_1="VVE" variable_2="VVE"/>
  // </connection>
  // <connection>
  // 	<map_components component_1="circulatory_dynamics" component_2="left_ventricular_output"/>
  // 	<map_variables variable_1="QLO" variable_2="QLO"/>
  // </connection>
  def map between circulatory_dynamics and right_ventricular_output for
    vars QRO and QRO;
  enddef;
  def map between circulatory_dynamics and left_atrial_pressure for
    vars PLA and PLA;
  enddef;
  def map between circulatory_dynamics and pulmonary_vasculature_pressure for
    vars PPA and PPA;
  enddef;
  def map between circulatory_dynamics and right_atrial_pressure for
    vars PRA and PRA;
  enddef;
  def map between circulatory_dynamics and pulmonary_venous_resistance for
    vars RPV and RPV;
  enddef;
  def map between circulatory_dynamics and pulmonary_arterial_resistance for
    vars RPA and RPA;
  enddef;
  // <connection>
  // 	<map_components component_1="circulatory_dynamics" component_2="systemic_blood_flow"/>
  // 	<map_variables variable_1="QAO" variable_2="QAO"/>
  // </connection>
  // ========================================	BLOOD VOLUME CHANGE	=============================================

  // value: CD75: The blood volume change that must be distributed to the different segments of the circulation since the last iteration (VBD) is calculated by subtracting the volumes of the various vascular segments (VAS, VVS, VRA, VLA, and VPA) from the total blood volume, that is, plasma volume (VP) plus red cell volume (VRC).
  def comp total_blood_volume_change as
    // Inputs from other components
    var VP: litre {priv: none, pub: in};
    var VRC: litre {priv: none, pub: in};
    var VVS1: litre {priv: none, pub: in};
    var VAS1: litre {priv: none, pub: in};
    var VLA1: litre {priv: none, pub: in};
    var VPA1: litre {priv: none, pub: in};
    var VRA1: litre {priv: none, pub: in};
    // Outputs to other components
    var VBD: litre {priv: none, pub: out};
    // value: CD75: The blood volume change that must be distributed to the different segments of the circulation since the last iteration (VBD) is calculated by subtracting the volumes of the various vascular segments (VAS, VVS, VRA, VLA, and VPA) from the total blood volume, that is, plasma volume (VP) plus red cell volume (VRC).
    VBD = (VP+VRC-VVS1-VAS1-VLA1-VPA1-VRA1)/2{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between total_blood_volume_change and circulatory_dynamics for
    vars VP and VP;
    vars VRC and VRC;
  enddef;
  // ========================================	RIGHT ATRIUM		=============================================

  // value: Containment grouping component for "right_atrial_blood_volume", "right_atrial_pressure", and "autonomic_stimulation_effect_on_right_atrial_pressure".
  def comp right_atrium as
  enddef;
  // ========================================	RIGHT ATRIAL BLOOD VOLUME	=============================================

  // value: CD20: The rate of change of blood volume in the right atrium (DRA) is equal to the rate of blood flow into the right atrium from the veins (QVO) minus the rate of outflow of blood from the right atrium through the right heart (QRO). CD21: A temporary value for the volume of blood in the right atrium is calculated by integrating the rate of change of blood volume in the right atrium (DRA). CD22: The portion of any change in total blood volume (VBD) that is ascribable to the right atrium is calculated by multiplying the total blood volume change (VBD) since the last iteration times a constant. CD23: The instantaneous volume of blood in the right atrium (VRA) is equal to the temporary value calculated in CD21 plus the volume of blood caused by a change in blood volume as calculated in CD22.
  def comp right_atrial_blood_volume as
    // Inputs from other components
    var QVO: L_per_minute {priv: none, pub: in};
    var QRO: L_per_minute {priv: none, pub: in};
    var VBD: litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VRA: litre {priv: none, pub: out};
    var VRA1: litre {init: 0.100043, priv: none, pub: out};
    // Internal variables
    var DRA: L_per_minute {priv: none, pub: none};
    // value: CD20: The rate of change of blood volume in the right atrium (DRA) is equal to the rate of blood flow into the right atrium from the veins (QVO) minus the rate of outflow of blood from the right atrium through the right heart (QRO).
    DRA = QVO-QRO;
    // value: CD21: A temporary value for the volume of blood in the right atrium is calculated by integrating the rate of change of blood volume in the right atrium (DRA).
    ode(VRA1, time) = DRA;
    // value: CD22: The portion of any change in total blood volume (VBD) that is ascribable to the right atrium is calculated by multiplying the total blood volume change (VBD) since the last iteration times a constant. CD23: The instantaneous volume of blood in the right atrium (VRA) is equal to the temporary value calculated in CD21 plus the volume of blood caused by a change in blood volume as calculated in CD22.
    VRA = VRA1+VBD*0.0574{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between right_atrial_blood_volume and rate_of_blood_flow_from_veins_to_right_atrium for
    vars QVO and QVO;
  enddef;
  def map between right_atrial_blood_volume and right_ventricular_output for
    vars QRO and QRO;
  enddef;
  def map between right_atrial_blood_volume and total_blood_volume_change for
    vars VRA1 and VRA1;
    vars VBD and VBD;
  enddef;
  def map between right_atrial_blood_volume and circulatory_dynamics for
    vars time and time;
  enddef;
  // ========================================	RIGHT ATRIAL PRESSURE	=============================================

  // value: CD24: The volume of excess blood in the right atrium (VRE) is equal to the instantaneous volume of blood in the right atrium (VRA) minus a constant value which represents the volume of blood in the right atrium when the atrium is filled to a level that will cause no increase in atrial pressure and the pressure is still zero. CD25: Temporary right atrial pressure (PRA) at normal level of autonomic stimulation (AU=1) is equal to the excess volume of blood in the right atrium (VRE) divided by a constant value which represents the capacitance of the right atrium.
  def comp right_atrial_pressure as
    // Inputs from other components
    var VRA: litre {priv: none, pub: in};
    // Outputs to other components
    var PRA: mmHg {priv: none, pub: out};
    // Internal variables
    var VRE: litre {priv: none, pub: none};
    // value: CD24: The volume of excess blood in the right atrium (VRE) is equal to the instantaneous volume of blood in the right atrium (VRA) minus a constant value which represents the volume of blood in the right atrium when the atrium is filled to a level that will cause no increase in atrial pressure and the pressure is still zero.
    VRE = VRA-0.1{litre};
    // value: CD25: Temporary right atrial pressure (PRA) at normal level of autonomic stimulation (AU=1) is equal to the excess volume of blood in the right atrium (VRE) divided by a constant value which represents the capacitance of the right atrium.
    PRA = VRE/0.005{L_per_mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between right_atrial_pressure and right_atrial_blood_volume for
    vars VRA and VRA;
  enddef;
  // ===============================	AUTONOMIC STIMULATION EFFECT ON RIGHT ATRIAL PRESSURE	========================================

  // value: CD25C, CD25D, CD25E, and CD25F: Calculation of the shift of the temporary calculated right atrial pressure of PRA to its actual value of PRA1 when the level of autonomic stimulation AU) changes to some other value besides the normal value of 1.0. The value of HTAUML determines the ratio of the slope of changing PRA1 to slope of changing PRA.
  def comp autonomic_stimulation_effect_on_right_atrial_pressure as
    // Inputs from other components
    var PRA: mmHg {priv: none, pub: in};
    var AU: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var PRA1: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var HTAUML: dimensionless {priv: none, pub: in};
    // value: CD25C, CD25D, CD25E, and CD25F: Calculation of the shift of the temporary calculated right atrial pressure of PRA to its actual value of PRA1 when the level of autonomic stimulation AU) changes to some other value besides the normal value of 1.0. The value of HTAUML determines the ratio of the slope of changing PRA1 to slope of changing PRA.
    PRA1 = (PRA+8{mmHg})*(HTAUML*(AU-1{dimensionless})+1{dimensionless})-8{mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between autonomic_stimulation_effect_on_right_atrial_pressure and right_atrial_pressure for
    vars PRA and PRA;
  enddef;
  def map between autonomic_stimulation_effect_on_right_atrial_pressure and circulatory_dynamics for
    vars AU and AU;
  enddef;
  // PARAMETER CONNECTIONS
  def map between autonomic_stimulation_effect_on_right_atrial_pressure and circulatory_dynamics_parameter_values for
    vars HTAUML and HTAUML;
  enddef;
  // ========================================	RIGHT VENTIRICLE	=============================================

  // value: Containment grouping component for "pressure_effect_on_right_ventricular_pumping", "pumping_effectiveness_of_right_ventricle" and "right_ventricular_output".
  def comp right_ventricle as
  enddef;
  // ========================================	PRESSURE EFFECT ON RIGHT VENTRICULAR PUMPING	=============================================

  // value: CD68: Calculation of a multiplier factor (PP2) from three factors that affect the ability of the right heart to withstand increasing output loads: The effect of the pulmonary arterial pressure itself (PPA), the effect of changes in heart arterial oxygen saturation in the coronary blood flow (OSA), and the effect of sympathetic stimulation (AUH). CD69: Function curve relating the multiplier factor from CD68 (PP2) to a multiplier factor for pumping strength of the right heart musculature (RVM).
  def comp pressure_effect_on_right_ventricular_pumping as
    // Inputs from other components
    var PPA: mmHg {priv: none, pub: in};
    var AUH: dimensionless {priv: none, pub: in};
    var OSA: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var RVM: dimensionless {priv: none, pub: out};
    // Internal variables
    var PP2: mmHg {priv: none, pub: none};
    // value: CD68: Calculation of a multiplier factor (PP2) from three factors that affect the ability of the right heart to withstand increasing output loads: The effect of the pulmonary arterial pressure itself (PPA), the effect of changes in heart arterial oxygen saturation in the coronary blood flow (OSA), and the effect of sympathetic stimulation (AUH).
    PP2 = PPA/AUH/OSA;
    // value: CD69: Function curve relating the multiplier factor from CD68 (PP2) to a multiplier factor for pumping strength of the right heart musculature (RVM).
    RVM = sel
      case PP2 <= 0{mmHg}:
        1.06{dimensionless};
      case (PP2 > 0{mmHg}) and (PP2 <= 32{mmHg}):
        1.06{dimensionless}+(0.97{per_mmHg}-1.06{per_mmHg})*(PP2-0{mmHg})/(32{dimensionless}-0{dimensionless});
      case (PP2 > 32{mmHg}) and (PP2 <= 38.4{mmHg}):
        0.97{dimensionless}+(0.93{per_mmHg}-0.97{per_mmHg})*(PP2-32{mmHg})/(38.4{dimensionless}-32{dimensionless});
      case (PP2 > 38.4{mmHg}) and (PP2 <= 48{mmHg}):
        0.93{dimensionless}+(0.8{per_mmHg}-0.93{per_mmHg})*(PP2-38.4{mmHg})/(48{dimensionless}-38.4{dimensionless});
      case (PP2 > 48{mmHg}) and (PP2 <= 60.8{mmHg}):
        0.8{dimensionless}+(0.46{per_mmHg}-0.8{per_mmHg})*(PP2-48{mmHg})/(60.8{dimensionless}-48{dimensionless});
      case (PP2 > 60.8{mmHg}) and (PP2 <= 72{mmHg}):
        0.46{dimensionless}+(0{per_mmHg}-0.46{per_mmHg})*(PP2-60.8{mmHg})/(72{dimensionless}-60.8{dimensionless});
      otherwise:
        0{dimensionless};
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between pressure_effect_on_right_ventricular_pumping and pulmonary_vasculature_pressure for
    vars PPA and PPA;
  enddef;
  def map between pressure_effect_on_right_ventricular_pumping and circulatory_dynamics for
    vars AUH and AUH;
    vars OSA and OSA;
  enddef;
  // ========================================	PUMPING EFFECTIVENESS OF RIGHT VENTRICLE	=============================================

  // value: CD70 and CD71: Calculation of the proportion of the pumping effectiveness of the right heart that is caused by left heart contraction. This is determined by the normal proportion (QRF) times the instantaneous output of the left heart (QLO) and divided by the normalized output of the left heart (QLN) when all factors affecting left heart strength are normal. CD72 and CD73: Calculation of the proportion of the right heart pumping effectiveness that is caused by right heart musculature contraction itself, calculated from multiple factors that affect right heart pumping including the normal proportion of right heart pumping that is caused by left heart pumping (QRF), the strength of the right heart (HSR) relative to its normal strength, the loading effect of pulmonary arterial pressure on the right heart (RVM), the effect of autonomic stimulation on right heart strength (AUH), the effect of possible deterioration of the right heart from shock and other factors (HMD), and the effect on right heart strength caused by hypertrophy of the right heart (HPR). CD74: Calculation of the pumping effectiveness of the right heart (HPEF) by adding the proportion of the pumping effectiveness caused by left heart function as calculated from CD71 plus the proportion caused by pumping by the right heart as calculated from CD73.
  def comp pumping_effectiveness_of_right_ventricle as
    // Inputs from other components
    var AUH: dimensionless {priv: none, pub: in};
    var RVM: dimensionless {priv: none, pub: in};
    var HMD: dimensionless {priv: none, pub: in};
    var HPR: dimensionless {priv: none, pub: in};
    var QLO: L_per_minute {priv: none, pub: in};
    var QLN: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var HPEF: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var QRF: L_per_minute {priv: none, pub: in};
    var HSR: dimensionless {priv: none, pub: in};
    // value: CD70 and CD71: Calculation of the proportion of the pumping effectiveness of the right heart that is caused by left heart contraction. This is determined by the normal proportion (QRF) times the instantaneous output of the left heart (QLO) and divided by the normalized output of the left heart (QLN) when all factors affecting left heart strength are normal. CD72 and CD73: Calculation of the proportion of the right heart pumping effectiveness that is caused by right heart musculature contraction itself, calculated from multiple factors that affect right heart pumping including the normal proportion of right heart pumping that is caused by left heart pumping (QRF), the strength of the right heart (HSR) relative to its normal strength, the loading effect of pulmonary arterial pressure on the right heart (RVM), the effect of autonomic stimulation on right heart strength (AUH), the effect of possible deterioration of the right heart from shock and other factors (HMD), and the effect on right heart strength caused by hypertrophy of the right heart (HPR). CD74: Calculation of the pumping effectiveness of the right heart (HPEF) by adding the proportion of the pumping effectiveness caused by left heart function as calculated from CD71 plus the proportion caused by pumping by the right heart as calculated from CD73.
    HPEF = (1{L_per_minute}-QRF)*AUH*RVM*HSR*HMD*HPR+QRF*QLO/QLN;
  enddef;
  // INPUT CONNECTIONS
  def map between pumping_effectiveness_of_right_ventricle and circulatory_dynamics for
    vars AUH and AUH;
    vars HMD and HMD;
    vars HPR and HPR;
  enddef;
  def map between pumping_effectiveness_of_right_ventricle and pressure_effect_on_right_ventricular_pumping for
    vars RVM and RVM;
  enddef;
  def map between pumping_effectiveness_of_right_ventricle and left_ventricular_output for
    vars QLO and QLO;
    vars QLN and QLN;
  enddef;
  // PARAMETER CONNECTIONS
  def map between pumping_effectiveness_of_right_ventricle and circulatory_dynamics_parameter_values for
    vars QRF and QRF;
    vars HSR and HSR;
  enddef;
  // ========================================	RIGHT VENTRICULAR OUTPUT	=============================================

  // value: CD26: Function curve that gives the output from the right heart (QRN) for any given level of right atrial pressure (PRA1) when all conditions of the right heart are normal. CD27: Calculation of the actual output from the right heart (QRO) by multiplying the normalized value for the output (QRN) times a value that represents the instantaneous pumping effectiveness of the right heart (HPEF).
  def comp right_ventricular_output as
    // Inputs from other components
    var PRA1: mmHg {priv: none, pub: in};
    var HPEF: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var QRO: L_per_minute {priv: none, pub: out};
    // Internal variables
    var QRN: dimensionless {priv: none, pub: none};
    // value: CD26: Function curve that gives the output from the right heart (QRN) for any given level of right atrial pressure (PRA1) when all conditions of the right heart are normal.
    QRN = sel
      case PRA1 <= -8{mmHg}:
        0{dimensionless};
      case (PRA1 > -8{mmHg}) and (PRA1 <= -6{mmHg}):
        0{dimensionless}+(0.75{per_mmHg}-0{per_mmHg})*(PRA1-(-8{mmHg}))/(-6{dimensionless}-(-8{dimensionless}));
      case (PRA1 > -6{mmHg}) and (PRA1 <= -2{mmHg}):
        0.75{dimensionless}+(2.6{per_mmHg}-0.75{per_mmHg})*(PRA1-(-6{mmHg}))/(-2{dimensionless}-(-6{dimensionless}));
      case (PRA1 > -2{mmHg}) and (PRA1 <= 4{mmHg}):
        2.6{dimensionless}+(9.8{per_mmHg}-2.6{per_mmHg})*(PRA1-(-2{mmHg}))/(4{dimensionless}-(-2{dimensionless}));
      case (PRA1 > 4{mmHg}) and (PRA1 <= 12{mmHg}):
        9.8{dimensionless}+(13.5{per_mmHg}-9.8{per_mmHg})*(PRA1-4{mmHg})/(12{dimensionless}-4{dimensionless});
      otherwise:
        13.5{dimensionless};
    endsel;
    // value: CD27: Calculation of the actual output from the right heart (QRO) by multiplying the normalized value for the output (QRN) times a value that represents the instantaneous pumping effectiveness of the right heart (HPEF).
    QRO = QRN*HPEF;
  enddef;
  // INPUT CONNECTIONS
  def map between right_ventricular_output and autonomic_stimulation_effect_on_right_atrial_pressure for
    vars PRA1 and PRA1;
  enddef;
  def map between right_ventricular_output and pumping_effectiveness_of_right_ventricle for
    vars HPEF and HPEF;
  enddef;
  // ========================================	PULMONARY VASCULATURE	=============================================

  // value: Containment grouping component for "pulmonary_vasculature_blood_volume", "pulmonary_vasculature_pressure", "pulmonary_arterial_resistance", "pulmonary_venous_resistance", "total_pulmonary_vasculature_resistance", "pressure_gradient_through_the_lungs" and "rate_of_blood_flow_from_pulmonary_veins_to_left_atrium".
  def comp pulmonary_vasculature as
  enddef;
  // ========================================	PULMONARY VASCULATURE BLOOD VOLUME		=============================================

  // value: CD28: Rate of change of blood volume in the pulmonary arterial tree (DPA) is equal to the rate of blood flow into the pulmonary arterial tree (QRO) minus the rate of blood flow from the pulmonary arterial tree to the pulmonary venous tree (QPO). CD29: A temporary value for the instantaneous volume of blood in the pulmonary arterial tree is calculated by integrating the rate of change of blood volume in the pulmonary arterial tree (DPA). CD30: The portion ascribable to the pulmonary arteries of any total blood volume change (VBD) that has occurred since the last iteration is calculated by multiplying the total volume change since the last iteration (VBD) times a constant proportionality factor. CD31: The instantaneous volume of blood in the pulmonary arteria tree (VPA) is equal to the temporary value calculated from Block CD29 plus the additional blood resulting from a blood volume change as calculated in CD30.
  def comp pulmonary_vasculature_blood_volume as
    // Inputs from other components
    var QRO: L_per_minute {priv: none, pub: in};
    var QPO: L_per_minute {priv: none, pub: in};
    var VBD: litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VPA: litre {priv: none, pub: out};
    var VPA1: litre {init: 0.38131, priv: none, pub: out};
    // Internal variables
    var DPA: L_per_minute {priv: none, pub: none};
    // value: CD28: Rate of change of blood volume in the pulmonary arterial tree (DPA) is equal to the rate of blood flow into the pulmonary arterial tree (QRO) minus the rate of blood flow from the pulmonary arterial tree to the pulmonary venous tree (QPO).
    DPA = QRO-QPO;
    // value: CD29: A temporary value for the instantaneous volume of blood in the pulmonary arterial tree is calculated by integrating the rate of change of blood volume in the pulmonary arterial tree (DPA).
    ode(VPA1, time) = DPA;
    // value: CD30: The portion ascribable to the pulmonary arteries of any total blood volume change (VBD) that has occurred since the last iteration is calculated by multiplying the total volume change since the last iteration (VBD) times a constant proportionality factor. CD31: The instantaneous volume of blood in the pulmonary arteria tree (VPA) is equal to the temporary value calculated from Block CD29 plus the additional blood resulting from a blood volume change as calculated in CD30.
    VPA = VPA1+VBD*0.155{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between pulmonary_vasculature_blood_volume and right_ventricular_output for
    vars QRO and QRO;
  enddef;
  def map between pulmonary_vasculature_blood_volume and rate_of_blood_flow_from_pulmonary_veins_to_left_atrium for
    vars QPO and QPO;
  enddef;
  def map between pulmonary_vasculature_blood_volume and total_blood_volume_change for
    vars VPA1 and VPA1;
    vars VBD and VBD;
  enddef;
  def map between pulmonary_vasculature_blood_volume and circulatory_dynamics for
    vars time and time;
  enddef;
  // ========================================	PULMONARY VASCULATURE PRESSURE		=============================================

  // value: CD32: Excess volume of blood in the pulmonary arterial tree (VPE) is equal to the instantaneous volume of blood in the pulmonary tree (VPA) minus a constant value which represents the volume of blood in the pulmonary arterial tree when it is filled but still at zero pressure. CD33: The pulmonary arterial pressure (PPA) is equal to the excess volume of blood in the pulmonary arterial tree (VPE) divided by a constant which is equal to the capacitance of the pulmonary arterial tree.
  def comp pulmonary_vasculature_pressure as
    // Inputs from other components
    var VPA: litre {priv: none, pub: in};
    // Outputs to other components
    var PPA: mmHg {priv: none, pub: out};
    // Internal variables
    var VPE: litre {priv: none, pub: none};
    // value: CD32: Excess volume of blood in the pulmonary arterial tree (VPE) is equal to the instantaneous volume of blood in the pulmonary tree (VPA) minus a constant value which represents the volume of blood in the pulmonary arterial tree when it is filled but still at zero pressure.
    VPE = VPA-0.30625{litre};
    // value: CD33: The pulmonary arterial pressure (PPA) is equal to the excess volume of blood in the pulmonary arterial tree (VPE) divided by a constant which is equal to the capacitance of the pulmonary arterial tree.
    PPA = VPE/0.0048{L_per_mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between pulmonary_vasculature_pressure and pulmonary_vasculature_blood_volume for
    vars VPA and VPA;
  enddef;
  // ========================================	PULMONARY ARTERIAL RESISTANCE	=============================================

  // value: CD59, CD60, CD61, and CD62: Calculation of the resistance through the pulmonary arterioles (RPA) caused by changes in pulmonary arterial pressure (PPA). CD60 gives a limit value for one of the intermediate calculations, and CD61 gives an exponential effect of pressure on natriuresis.
  def comp pulmonary_arterial_resistance as
    // Inputs from other components
    var PPA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var RPA: mmHg_minute_per_L {priv: none, pub: out};
    // Internal variables
    var PP1T: L_per_minute_per_mmHg {priv: none, pub: none};
    var PP1: L_per_minute_per_mmHg {priv: none, pub: none};
    var CPA: L_per_minute_per_mmHg {priv: none, pub: none};
    // value: CD59, CD60, CD61, and CD62: Calculation of the resistance through the pulmonary arterioles (RPA) caused by changes in pulmonary arterial pressure (PPA). CD60 gives a limit value for one of the intermediate calculations, and CD61 gives an exponential effect of pressure on natriuresis.
    PP1T = 0.026{L_per_minute_per_mmHg2}*PPA;
    // value: CD59, CD60, CD61, and CD62: Calculation of the resistance through the pulmonary arterioles (RPA) caused by changes in pulmonary arterial pressure (PPA). CD60 gives a limit value for one of the intermediate calculations, and CD61 gives an exponential effect of pressure on natriuresis.
    PP1 = sel
      case PP1T < 0.00001{L_per_minute_per_mmHg}:
        0.00001{L_per_minute_per_mmHg};
      otherwise:
        PP1T;
    endsel;
    // value: CD59, CD60, CD61, and CD62: Calculation of the resistance through the pulmonary arterioles (RPA) caused by changes in pulmonary arterial pressure (PPA). CD60 gives a limit value for one of the intermediate calculations, and CD61 gives an exponential effect of pressure on natriuresis.
    CPA = pow(PP1, 0.5{dimensionless});
    // value: CD59, CD60, CD61, and CD62: Calculation of the resistance through the pulmonary arterioles (RPA) caused by changes in pulmonary arterial pressure (PPA). CD60 gives a limit value for one of the intermediate calculations, and CD61 gives an exponential effect of pressure on natriuresis.
    RPA = 1{dimensionless}/CPA;
  enddef;
  // INPUT CONNECTIONS
  def map between pulmonary_arterial_resistance and pulmonary_vasculature_pressure for
    vars PPA and PPA;
  enddef;
  // ========================================	PULMONARY VENOUS RESISTANCE	=============================================

  // value: CD63 and CD64: Calculation of the resistance of blood flow through the pulmonary veins (RPV) as a function of the left atrial pressure (PLA). Basically an increase in left atrial pressure distends the pulmonary veins and reduces the resistance.
  def comp pulmonary_venous_resistance as
    // Inputs from other components
    var PLA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var RPV: mmHg_minute_per_L {priv: none, pub: out};
    // Internal variables
    var PL1: mmHg {priv: none, pub: none};
    // value: CD63 and CD64: Calculation of the resistance of blood flow through the pulmonary veins (RPV) as a function of the left atrial pressure (PLA). Basically an increase in left atrial pressure distends the pulmonary veins and reduces the resistance.
    PL1 = PLA+18{mmHg};
    // value: CD63 and CD64: Calculation of the resistance of blood flow through the pulmonary veins (RPV) as a function of the left atrial pressure (PLA). Basically an increase in left atrial pressure distends the pulmonary veins and reduces the resistance.
    RPV = 1{dimensionless}/(PL1*0.0357{L_per_minute_per_mmHg2});
  enddef;
  // INPUT CONNECTIONS
  def map between pulmonary_venous_resistance and left_atrial_pressure for
    vars PLA and PLA;
  enddef;
  // ========================================	TOTAL PULMONARY VASCULAR RESISTANCE		=============================================

  // value: CD65: The total resistance in the pulmonary circuit (RPT) is equal to the sum of the pulmonary arterial resistance (RPA) plus the pulmonary venous resistance (RPV).
  def comp total_pulmonary_vascular_resistance as
    // Inputs from other components
    var RPV: mmHg_minute_per_L {priv: none, pub: in};
    var RPA: mmHg_minute_per_L {priv: none, pub: in};
    // Outputs to other components
    var RPT: mmHg_minute_per_L {priv: none, pub: out};
    // value: CD65: The total resistance in the pulmonary circuit (RPT) is equal to the sum of the pulmonary arterial resistance (RPA) plus the pulmonary venous resistance (RPV).
    RPT = RPV+RPA;
  enddef;
  // INPUT CONNECTIONS
  def map between total_pulmonary_vascular_resistance and pulmonary_venous_resistance for
    vars RPV and RPV;
  enddef;
  def map between total_pulmonary_vascular_resistance and pulmonary_arterial_resistance for
    vars RPA and RPA;
  enddef;
  // ========================================	PRESSURE GRADIENT THROUGH THE LUNGS		=============================================

  // value: CD34: The pressure gradient through the lungs from the pulmonary arteries to the pulmonary veins (PGL) is equal to the pressure in the pulmonary arteries (PPA) minus the pressure in the left atrium (PLA).
  def comp pressure_gradient_through_the_lungs as
    // Inputs from other components
    var PPA: mmHg {priv: none, pub: in};
    var PLA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var PGL: mmHg {priv: none, pub: out};
    // value: CD34: The pressure gradient through the lungs from the pulmonary arteries to the pulmonary veins (PGL) is equal to the pressure in the pulmonary arteries (PPA) minus the pressure in the left atrium (PLA).
    PGL = PPA-PLA;
  enddef;
  // INPUT CONNECTIONS
  def map between pressure_gradient_through_the_lungs and pulmonary_vasculature_pressure for
    vars PPA and PPA;
  enddef;
  def map between pressure_gradient_through_the_lungs and left_atrial_pressure for
    vars PLA and PLA;
  enddef;
  // ===============================		RATE OF BLOOD FLOW FROM PULMONARY VEINS TO LEFT ATRIUM		======================================

  // value: CD35: Rate of outflow of blood from the pulmonary arterial tree (QPO) is equal to the pressure gradient through the lungs (PGL) divided by the resistance to blood flow through the lungs (RPT). CD35A: Damping of QPO to allow rapid computation of long-term hemodynamics. When the value U equals 1.0 there is no damping. Any larger value for U provides proportionate damping.
  def comp rate_of_blood_flow_from_pulmonary_veins_to_left_atrium as
    // Inputs from other components
    var PGL: mmHg {priv: none, pub: in};
    var RPT: mmHg_minute_per_L {priv: none, pub: in};
    var QLO: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var QPO: L_per_minute {priv: none, pub: out};
    // value: CD35: Rate of outflow of blood from the pulmonary arterial tree (QPO) is equal to the pressure gradient through the lungs (PGL) divided by the resistance to blood flow through the lungs (RPT).
    QPO = PGL/RPT;
    // <apply id="CD35A - DAMPING!!!">
    // 	<eq/>
    // 	<ci>QPO</ci>
    // 	<apply>
    // 		<plus/>
    // 		<ci>QLO</ci>
    // 		<apply>
    // 			<divide/>
    // 			<apply>
    // 				<minus/>
    // 				<ci>QPO</ci>
    // 				<ci>QLO</ci>
    // 			</apply>
    // 			<ci>U</ci>
    // 		</apply>
    // 	</apply>
    // </apply>
  enddef;
  // INPUT CONNECTIONS
  def map between rate_of_blood_flow_from_pulmonary_veins_to_left_atrium and pressure_gradient_through_the_lungs for
    vars PGL and PGL;
  enddef;
  def map between rate_of_blood_flow_from_pulmonary_veins_to_left_atrium and total_pulmonary_vascular_resistance for
    vars RPT and RPT;
  enddef;
  def map between rate_of_blood_flow_from_pulmonary_veins_to_left_atrium and left_ventricular_output for
    vars QLO and QLO;
  enddef;
  // ========================================	LEFT ATRIUM	=============================================

  // value: Containment grouping component for "left_atrial_blood_volume", "left_atrial_pressure" and "autonomic_stimulation_effect_on_left_atrial_pressure".
  def comp left_atrium as
  enddef;
  // ========================================	LEFT ATRIAL BLOOD VOLUME	=============================================

  // value: CD36: The rate of change of blood volume in the left atrium (DLA) is equal to the rate of blood flow into the left atrium from the pulmonary circulation (QPO) minus the rate of blood flow out of the left atrium through the left heart (QLO). CD37: Calculation of a temporary value for the instantaneous volume of blood in the left atrium by integrating the rate of blood volume change in the left atrium (DLA). CD38: Calculation of the proportion of any blood volume change (VBD) that has occurred since the last iteration that is distributed to the left atrium, calculated by multiplying by a porprotionality constant. CD39: The instantaneous volume of blood in the left atrium (VLA) is equal to the temporary value calculated in CD37 plus the proportion of any blood volume change that is attributable to the left atrium as calculated in CD38.
  def comp left_atrial_blood_volume as
    // Inputs from other components
    var QPO: L_per_minute {priv: none, pub: in};
    var QLO: L_per_minute {priv: none, pub: in};
    var VBD: litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VLA: litre {priv: none, pub: out};
    var VLA1: litre {init: 0.379883, priv: none, pub: out};
    // Internal variables
    var DLA: L_per_minute {priv: none, pub: none};
    // value: CD36: The rate of change of blood volume in the left atrium (DLA) is equal to the rate of blood flow into the left atrium from the pulmonary circulation (QPO) minus the rate of blood flow out of the left atrium through the left heart (QLO).
    DLA = QPO-QLO;
    // value: CD37: Calculation of a temporary value for the instantaneous volume of blood in the left atrium by integrating the rate of blood volume change in the left atrium (DLA).
    ode(VLA1, time) = DLA;
    // value: CD38: Calculation of the proportion of any blood volume change (VBD) that has occurred since the last iteration that is distributed to the left atrium, calculated by multiplying by a porprotionality constant. CD39: The instantaneous volume of blood in the left atrium (VLA) is equal to the temporary value calculated in CD37 plus the proportion of any blood volume change that is attributable to the left atrium as calculated in CD38.
    VLA = VLA1+VBD*0.128{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between left_atrial_blood_volume and rate_of_blood_flow_from_pulmonary_veins_to_left_atrium for
    vars QPO and QPO;
  enddef;
  def map between left_atrial_blood_volume and left_ventricular_output for
    vars QLO and QLO;
  enddef;
  def map between left_atrial_blood_volume and total_blood_volume_change for
    vars VLA1 and VLA1;
    vars VBD and VBD;
  enddef;
  def map between left_atrial_blood_volume and circulatory_dynamics for
    vars time and time;
  enddef;
  // ========================================	LEFT ATRIAL PRESSURE	=============================================

  // value: CD40: The excess blood volume in the left atrium (VLE) is equal to the instantaneous volume of blood in the left atrium (VLA) minus a constant value which is the volume of blood in the left atrium when it is filled with the pressure at zero. CD41: The pressure in the left atrium (PLE) is equal to the instantaneous exces volume in the left atrium (VLE) divided by a constant which is equal to the capacitance of the left atrium.
  def comp left_atrial_pressure as
    // Inputs from other components
    var VLA: litre {priv: none, pub: in};
    // Outputs to other components
    var PLA: mmHg {priv: none, pub: out};
    // Internal variables
    var VLE: litre {priv: none, pub: none};
    // value: CD40: The excess blood volume in the left atrium (VLE) is equal to the instantaneous volume of blood in the left atrium (VLA) minus a constant value which is the volume of blood in the left atrium when it is filled with the pressure at zero.
    VLE = VLA-0.38{litre};
    // value: CD41: The pressure in the left atrium (PLE) is equal to the instantaneous exces volume in the left atrium (VLE) divided by a constant which is equal to the capacitance of the left atrium.
    PLA = VLE/0.01{L_per_mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between left_atrial_pressure and left_atrial_blood_volume for
    vars VLA and VLA;
  enddef;
  // =================================	AUTONOMIC STIMULATION EFFECT ON LEFT ATRIAL PRESSURE	=========================================

  // value: CD41A, CD41B, CD41C, and CD41D: These blocks serve the same functions for the left heart that Blocks CD25C, CD25D, CD25E, and CD25F serve for the right ventricle. The value AU in Block CD41D is the level of autonomic stimulation of the heart, and HTAUML is the multiplier constant for calculating the effect of changes in AU on the shift of left atrial pressure effect from PLA to PLA1.
  def comp autonomic_stimulation_effect_on_left_atrial_pressure as
    // Inputs from other components
    var PLA: mmHg {priv: none, pub: in};
    var AU: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var PLA1: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var HTAUML: dimensionless {priv: none, pub: in};
    // value: CD41A, CD41B, CD41C, and CD41D: These blocks serve the same functions for the left heart that Blocks CD25C, CD25D, CD25E, and CD25F serve for the right ventricle. The value AU in Block CD41D is the level of autonomic stimulation of the heart, and HTAUML is the multiplier constant for calculating the effect of changes in AU on the shift of left atrial pressure effect from PLA to PLA1.
    PLA1 = (PLA+4{mmHg})*(HTAUML*(AU-1{dimensionless})+1{dimensionless})-4{mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between autonomic_stimulation_effect_on_left_atrial_pressure and left_atrial_pressure for
    vars PLA and PLA;
  enddef;
  def map between autonomic_stimulation_effect_on_left_atrial_pressure and circulatory_dynamics for
    vars AU and AU;
  enddef;
  // PARAMETER CONNECTIONS
  def map between autonomic_stimulation_effect_on_left_atrial_pressure and circulatory_dynamics_parameter_values for
    vars HTAUML and HTAUML;
  enddef;
  // ========================================	LEFT VENTRICLE		=============================================

  // value: Containment grouping component for "pumping_effectiveness_of_left_ventricle", and "left_ventricular_output".
  def comp left_ventricle as
  enddef;
  // ========================================	PUMPING EFFECTIVENESS OF LEFT VENTRICLE	=============================================

  // value: CD66: A temporary multiplier function (PA2) for the effectiveness of left heart pumping is calculated from three factors: Stimulation of the left heart by the autonomic nervous system (AUH), effect on heart pumping caused by changes in arterial oxygen saturation (OSA), effect on heart pumping caused by the loading effect of systemic arterial pressure (PA). CD67: Function curve relating the pumping effectiveness of the left heart (LVM) to the multiplier function calculated in CD66 (PA2).
  def comp pumping_effectiveness_of_left_ventricle as
    // Inputs from other components
    var PA: mmHg {priv: none, pub: in};
    var AUH: dimensionless {priv: none, pub: in};
    var OSA: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var LVM: dimensionless {priv: none, pub: out};
    // Internal variables
    var PA2: mmHg {priv: none, pub: none};
    // value: CD66: A temporary multiplier function (PA2) for the effectiveness of left heart pumping is calculated from three factors: Stimulation of the left heart by the autonomic nervous system (AUH), effect on heart pumping caused by changes in arterial oxygen saturation (OSA), effect on heart pumping caused by the loading effect of systemic arterial pressure (PA).
    PA2 = PA/(AUH*OSA);
    // value: CD67: Function curve relating the pumping effectiveness of the left heart (LVM) to the multiplier function calculated in CD66 (PA2).
    LVM = sel
      case PA2 <= 0{mmHg}:
        1.04{dimensionless};
      case (PA2 > 0{mmHg}) and (PA2 <= 60{mmHg}):
        1.04{dimensionless}+(1.025{per_mmHg}-1.04{per_mmHg})*(PA2-0{mmHg})/(60{dimensionless}-0{dimensionless});
      case (PA2 > 60{mmHg}) and (PA2 <= 125{mmHg}):
        1.025{dimensionless}+(0.97{per_mmHg}-1.025{per_mmHg})*(PA2-60{mmHg})/(125{dimensionless}-60{dimensionless});
      case (PA2 > 125{mmHg}) and (PA2 <= 160{mmHg}):
        0.97{dimensionless}+(0.88{per_mmHg}-0.97{per_mmHg})*(PA2-125{mmHg})/(160{dimensionless}-125{dimensionless});
      case (PA2 > 160{mmHg}) and (PA2 <= 200{mmHg}):
        0.88{dimensionless}+(0.59{per_mmHg}-0.88{per_mmHg})*(PA2-160{mmHg})/(200{dimensionless}-160{dimensionless});
      case (PA2 > 200{mmHg}) and (PA2 <= 240{mmHg}):
        0.59{dimensionless}+(0{per_mmHg}-0.59{per_mmHg})*(PA2-200{mmHg})/(240{dimensionless}-200{dimensionless});
      otherwise:
        0{dimensionless};
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between pumping_effectiveness_of_left_ventricle and arterial_pressure_and_pressure_gradient for
    vars PA and PA;
  enddef;
  def map between pumping_effectiveness_of_left_ventricle and circulatory_dynamics for
    vars AUH and AUH;
    vars OSA and OSA;
  enddef;
  // ========================================	LEFT VENTRICULAR OUTPUT		=============================================

  // value: CD42: Function curve that gives the normalized rate of output of the left ventricle (QLN) when the left ventricle is operating at a normal level of pumping effectiveness for any given left atrial pressure (PLA). CD43: The actual rate of output from the left ventricle (QLO) when the normalized rate (QLN) is multiplied by various factors that alter the pumping effectiveness of the heart: A multiplier that reduces the effectiveness because of pressure load on the heart (LVM), a factor that changes the effectiveness of the heart because of abnormal left heart strength (HSL), a factor that increases the effectiveness of the heart because of hypertrophy (HPL), a factor that decreases the strength of the heart because of deterioration of the heart in low blood flow states (HMD), and a factor that alters the strength of the heart by increases or decreases in autonomic stimulation (AUH).
  def comp left_ventricular_output as
    // Inputs from other components
    var PLA1: mmHg {priv: none, pub: in};
    var LVM: dimensionless {priv: none, pub: in};
    var AUH: dimensionless {priv: none, pub: in};
    var HMD: dimensionless {priv: none, pub: in};
    var HPL: dimensionless {priv: none, pub: in};
    var PLA: mmHg {priv: none, pub: in};
    var PA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var QLO: L_per_minute {priv: none, pub: out};
    var QLOT: L_per_minute {priv: none, pub: out};
    var QLN: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var HSL: dimensionless {priv: none, pub: in};
    // Internal variables
    var QLO1: L_per_minute {priv: none, pub: none};
    // value: CD42: Function curve that gives the normalized rate of output of the left ventricle (QLN) when the left ventricle is operating at a normal level of pumping effectiveness for any given left atrial pressure (PLA).
    QLN = sel
      case PLA1 <= -2{mmHg}:
        0.01{L_per_minute};
      case (PLA1 > -2{mmHg}) and (PLA1 <= 1{mmHg}):
        0.01{L_per_minute}+(3.6{L_per_minute_per_mmHg}-0.01{L_per_minute_per_mmHg})*(PLA1-(-2{mmHg}))/(1{dimensionless}-(-2{dimensionless}));
      case (PLA1 > 1{mmHg}) and (PLA1 <= 5{mmHg}):
        3.6{L_per_minute}+(9.4{L_per_minute_per_mmHg}-3.6{L_per_minute_per_mmHg})*(PLA1-1{mmHg})/(5{dimensionless}-1{dimensionless});
      case (PLA1 > 5{mmHg}) and (PLA1 <= 8{mmHg}):
        9.4{L_per_minute}+(11.6{L_per_minute_per_mmHg}-9.4{L_per_minute_per_mmHg})*(PLA1-5{mmHg})/(8{dimensionless}-5{dimensionless});
      case (PLA1 > 8{mmHg}) and (PLA1 <= 12{mmHg}):
        11.6{L_per_minute}+(13.5{L_per_minute_per_mmHg}-11.6{L_per_minute_per_mmHg})*(PLA1-8{mmHg})/(12{dimensionless}-8{dimensionless});
      otherwise:
        13.5{L_per_minute};
    endsel;
    // value: CD43: The actual rate of output from the left ventricle (QLO) when the normalized rate (QLN) is multiplied by various factors that alter the pumping effectiveness of the heart: A multiplier that reduces the effectiveness because of pressure load on the heart (LVM), a factor that changes the effectiveness of the heart because of abnormal left heart strength (HSL), a factor that increases the effectiveness of the heart because of hypertrophy (HPL), a factor that decreases the strength of the heart because of deterioration of the heart in low blood flow states (HMD), and a factor that alters the strength of the heart by increases or decreases in autonomic stimulation (AUH).
    QLOT = LVM*QLN*AUH*HSL*HMD*HPL;
    // value: CD43: The actual rate of output from the left ventricle (QLO) when the normalized rate (QLN) is multiplied by various factors that alter the pumping effectiveness of the heart: A multiplier that reduces the effectiveness because of pressure load on the heart (LVM), a factor that changes the effectiveness of the heart because of abnormal left heart strength (HSL), a factor that increases the effectiveness of the heart because of hypertrophy (HPL), a factor that decreases the strength of the heart because of deterioration of the heart in low blood flow states (HMD), and a factor that alters the strength of the heart by increases or decreases in autonomic stimulation (AUH).
    QLO1 = (PLA-PA)/3{mmHg_minute_per_L};
    // value: CD43: The actual rate of output from the left ventricle (QLO) when the normalized rate (QLN) is multiplied by various factors that alter the pumping effectiveness of the heart: A multiplier that reduces the effectiveness because of pressure load on the heart (LVM), a factor that changes the effectiveness of the heart because of abnormal left heart strength (HSL), a factor that increases the effectiveness of the heart because of hypertrophy (HPL), a factor that decreases the strength of the heart because of deterioration of the heart in low blood flow states (HMD), and a factor that alters the strength of the heart by increases or decreases in autonomic stimulation (AUH).
    QLO = sel
      case QLO1 > 0{L_per_minute}:
        QLOT+QLO1;
      otherwise:
        QLOT;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between left_ventricular_output and autonomic_stimulation_effect_on_left_atrial_pressure for
    vars PLA1 and PLA1;
  enddef;
  def map between left_ventricular_output and pumping_effectiveness_of_left_ventricle for
    vars LVM and LVM;
  enddef;
  def map between left_ventricular_output and circulatory_dynamics for
    vars QLO and QLO;
    vars AUH and AUH;
    vars HMD and HMD;
    vars HPL and HPL;
  enddef;
  def map between left_ventricular_output and left_atrial_pressure for
    vars PLA and PLA;
  enddef;
  def map between left_ventricular_output and arterial_pressure_and_pressure_gradient for
    vars PA and PA;
  enddef;
  // PARAMETER CONNECTIONS
  def map between left_ventricular_output and circulatory_dynamics_parameter_values for
    vars HSL and HSL;
  enddef;
  // ========================================	SYSTEMIC VENOUS SYSTEM	=============================================

  // value: Containment grouping component for "venous_blood_volume", "angiotensin_induced_venous_constriction", "venous_excess_volume", "venous_average_pressure", "venous_outflow_pressure_into_heart", "resistance_from_veins_to_right_atrium", "rate_of_blood_flow_from_veins_to_right_atrium", "venous_resistance" and "NM_NR_venous_resistance".
  def comp systemic_venous_system as
  enddef;
  // ========================================	VENOUS BLOOD VOLUME	=============================================

  // value: CD11: The rate of change of blood volume in the systemic veins (DVS) is equal to the rate of blood flow into the veins from the arterial tree (QAO) minus the rate of blood flow out of the veins (QVO). CD12: A temporary value is calculated for the instantaneous volume of blood in the veins by integrating the rate of change of the volume in the veins (DVS). CD13: The portion of any change in blood volume that has occurred since the last iteration that is ascribable to volume change in the veins is calculated by multiplying the total volume change (VBD) times a constant. CD14: The instantaneous volume of blood in the veins (VVS) is the sum of the temporary calculation of instantaneous venous volume from CD12 plus the additional venous volume change caused by change in total blood volume as calculated in CD13.
  def comp venous_blood_volume as
    // Inputs from other components
    var QAO: L_per_minute {priv: none, pub: in};
    var QVO: L_per_minute {priv: none, pub: in};
    var VBD: litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VVS: litre {priv: none, pub: out};
    var VVS1: litre {init: 3.28246, priv: none, pub: out};
    // Internal variables
    var DVS: L_per_minute {priv: none, pub: none};
    // value: CD11: The rate of change of blood volume in the systemic veins (DVS) is equal to the rate of blood flow into the veins from the arterial tree (QAO) minus the rate of blood flow out of the veins (QVO).
    DVS = QAO-QVO;
    // value: CD12: A temporary value is calculated for the instantaneous volume of blood in the veins by integrating the rate of change of the volume in the veins (DVS).
    ode(VVS1, time) = DVS;
    // value: CD13: The portion of any change in blood volume that has occurred since the last iteration that is ascribable to volume change in the veins is calculated by multiplying the total volume change (VBD) times a constant. CD14: The instantaneous volume of blood in the veins (VVS) is the sum of the temporary calculation of instantaneous venous volume from CD12 plus the additional venous volume change caused by change in total blood volume as calculated in CD13.
    VVS = VVS1+VBD*0.3986{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between venous_blood_volume and systemic_blood_flow for
    vars QAO and QAO;
  enddef;
  def map between venous_blood_volume and rate_of_blood_flow_from_veins_to_right_atrium for
    vars QVO and QVO;
  enddef;
  def map between venous_blood_volume and total_blood_volume_change for
    vars VBD and VBD;
    vars VVS1 and VVS1;
  enddef;
  def map between venous_blood_volume and circulatory_dynamics for
    vars time and time;
  enddef;
  // ========================================	ANGIOTENSIN-INDUCED VENOUS CONSTRICTION	=============================================

  // value: CD76 and CD77: Calculation of the decrease in excess venous volume caused by angiotensin constriction based on two factors: A multiplier factor caused by changes in concentration of angiotensin in the circulating blood (ANU) and a sensitivity adjustment (ANY).
  def comp angiotensin_induced_venous_constriction as
    // Inputs from other components
    var ANU: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var VVA: litre {priv: none, pub: out};
    // Parameters from parameter_file
    var ANY: litre {priv: none, pub: in};
    // value: CD76 and CD77: Calculation of the decrease in excess venous volume caused by angiotensin constriction based on two factors: A multiplier factor caused by changes in concentration of angiotensin in the circulating blood (ANU) and a sensitivity adjustment (ANY).
    VVA = (ANU-1{dimensionless})*ANY;
  enddef;
  // INPUT CONNECTIONS
  def map between angiotensin_induced_venous_constriction and circulatory_dynamics for
    vars ANU and ANU;
  enddef;
  // PARAMETER CONNECTIONS
  def map between angiotensin_induced_venous_constriction and circulatory_dynamics_parameter_values for
    vars ANY and ANY;
  enddef;
  // ========================================	VENOUS EXCESS VOLUME	=============================================

  // value: CD15: The excess volume in the veins (VVE) is calculated by subtracting the maximum volume of blood at zero venous pressure from the actual volume of blood in the systemic venous system (VVS). The maximum volume of blood in the venous system at zero pressure is equal to the sum of several variable factors: a basic volume when all other factors are normal (VVR), changes caused by atrial volume receptor feedback (ATRVFB), changes caused by stress relaxation (VV6 and VV7), and a change in basic volume of the venous system caused by constriction of the venous system in response to circulating angiotensin from block CD77.
  def comp venous_excess_volume as
    // Inputs from other components
    var VVS: litre {priv: none, pub: in};
    var VVR: litre {priv: none, pub: in};
    var VVA: litre {priv: none, pub: in};
    var VV6: litre {priv: none, pub: in};
    var VV7: litre {priv: none, pub: in};
    var ATRVFB: litre {priv: none, pub: in};
    // Outputs to other components
    var VVE: litre {priv: none, pub: out};
    // Internal variables
    var VVE1: litre {priv: none, pub: none};
    // value: CD15: The excess volume in the veins (VVE) is calculated by subtracting the maximum volume of blood at zero venous pressure from the actual volume of blood in the systemic venous system (VVS). The maximum volume of blood in the venous system at zero pressure is equal to the sum of several variable factors: a basic volume when all other factors are normal (VVR), changes caused by atrial volume receptor feedback (ATRVFB), changes caused by stress relaxation (VV6 and VV7), and a change in basic volume of the venous system caused by constriction of the venous system in response to circulating angiotensin from block CD77.
    VVE1 = VVS-VVR-VVA-VV7-VV6-ATRVFB;
    VVE = sel
      case VVE1 < 0.0001{litre}:
        0.0001{litre};
      otherwise:
        VVE1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between venous_excess_volume and venous_blood_volume for
    vars VVS and VVS;
  enddef;
  def map between venous_excess_volume and circulatory_dynamics for
    vars VVE and VVE;
    vars VVR and VVR;
    vars VV6 and VV6;
    vars VV7 and VV7;
    vars ATRVFB and ATRVFB;
  enddef;
  def map between venous_excess_volume and angiotensin_induced_venous_constriction for
    vars VVA and VVA;
  enddef;
  // ========================================	VENOUS AVERAGE PRESSURE	=============================================

  // value: CD16, CD16A, and CD16B: The average pressure in the venous system (PVS) is equal to the excess volume of blood in the veins (VVE) divided by the capacitance of the venous system (CV). The mathematics in these blocks are arranged so that when CV in block CD16A is changed, the blood volume in the venous system does not change at the normal venous pressure level of PVS (+ 3.7 mm Hg). CD16D: This block prevents the average venous pressure (PVS) from falling below .001 mm Hg.
  def comp venous_average_pressure as
    // Inputs from other components
    var VVE: litre {priv: none, pub: in};
    // Outputs to other components
    var PVS: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var CV: L_per_mmHg {priv: none, pub: in};
    // Internal variables
    var PVS1: mmHg {priv: none, pub: none};
    // value: CD16, CD16A, and CD16B: The average pressure in the venous system (PVS) is equal to the excess volume of blood in the veins (VVE) divided by the capacitance of the venous system (CV). The mathematics in these blocks are arranged so that when CV in block CD16A is changed, the blood volume in the venous system does not change at the normal venous pressure level of PVS (+ 3.7 mm Hg).
    PVS1 = 3.7{mmHg}+(VVE-0.74{litre})/CV;
    // value: CD16D: This block prevents the average venous pressure (PVS) from falling below .001 mm Hg.
    PVS = sel
      case PVS1 < 0.0001{mmHg}:
        0.0001{mmHg};
      otherwise:
        PVS1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between venous_average_pressure and venous_excess_volume for
    vars VVE and VVE;
  enddef;
  // PARAMETER CONNECTIONS
  def map between venous_average_pressure and circulatory_dynamics_parameter_values for
    vars CV and CV;
  enddef;
  // ========================================	VENOUS OUTFLOW PRESSURE INTO CHEST/HEART	=============================================

  // value: CD25A and CD25B: Calculation of the outflow pressure from the systemic veins into the chest (PR1) which is used for calculating the blood flow through the venous system in CD17. This corrects for the collapse of veins that might occur at entry to the chest when the right atrial pressure is negative, thus maintaining the output pressure from the venous system above a minimum pressure level corresponding to the pressure at which the veins collapse (PRILL).
  def comp venous_outflow_pressure_into_heart as
    // Inputs from other components
    var PRA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var PR1: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var PR1LL: mmHg {priv: none, pub: in};
    // value: CD25A and CD25B: Calculation of the outflow pressure from the systemic veins into the chest (PR1) which is used for calculating the blood flow through the venous system in CD17. This corrects for the collapse of veins that might occur at entry to the chest when the right atrial pressure is negative, thus maintaining the output pressure from the venous system above a minimum pressure level corresponding to the pressure at which the veins collapse (PRILL).
    PR1 = sel
      case PRA < PR1LL:
        PR1LL;
      otherwise:
        PRA;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between venous_outflow_pressure_into_heart and right_atrial_pressure for
    vars PRA and PRA;
  enddef;
  // PARAMETER CONNECTIONS
  def map between venous_outflow_pressure_into_heart and circulatory_dynamics_parameter_values for
    vars PR1LL and PR1LL;
  enddef;
  // ========================================	RESISTANCE FROM VEINS TO RIGHT ATRIUM	=============================================

  // value: CD18, CD18A, and CD18B: These blocks calculate the resistance from the large veins to the right atrium (RVS). Block CD18 takes into consideration the effect of the viscosity of the blood (VIM) when the normal value for the viscosity is considered to be 1.0. Block CD18A considers that the resistance (RVS) decreases in proportion to the square root of the level of large vein pressure (PVS). The numerical values in Blocks CD18 and CD18B are proportionality constants. This group of blocks is especially concerned with the reduction of venous resistance when pressure increases the diameter of the veins.
  def comp resistance_from_veins_to_right_atrium as
    // Inputs from other components
    var PVS: mmHg {priv: none, pub: in};
    var VIM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var RVG: mmHg_minute_per_L {priv: none, pub: out};
    // value: CD18, CD18A, and CD18B: These blocks calculate the resistance from the large veins to the right atrium (RVS). Block CD18 takes into consideration the effect of the viscosity of the blood (VIM) when the normal value for the viscosity is considered to be 1.0. Block CD18A considers that the resistance (RVS) decreases in proportion to the square root of the level of large vein pressure (PVS). The numerical values in Blocks CD18 and CD18B are proportionality constants. This group of blocks is especially concerned with the reduction of venous resistance when pressure increases the diameter of the veins.
    RVG = 0.74{mmHg_minute_per_L}/pow(PVS/(VIM*3.7{mmHg}), 0.5{dimensionless});
  enddef;
  // INPUT CONNECTIONS
  def map between resistance_from_veins_to_right_atrium and venous_average_pressure for
    vars PVS and PVS;
  enddef;
  def map between resistance_from_veins_to_right_atrium and circulatory_dynamics for
    vars VIM and VIM;
  enddef;
  // ========================================	RATE OF BLOOD FLOW FROM VEINS TO RIGHT ATRIUM	=============================================

  // value: CD17: The temporary pressure gradient (PGV) from the midpoint of the veins to the exit of the veins into the chest equals the venous pressure (PVS) minus the pressure at the exit point (PR1). CD19: The rate of blood flow out of the veins into the right atrium (QVO) is equal to the pressure gradient through the venous system (PGV) divided by the resistance to blood flow through the venous system (RVS). CD19A: This block provides damping of the value QVO when running on the computer. A damping value of X of 1.0 is no damping. Any higher value causes damping. The value should be equal to 1.0 when studying rapid changes in circulatory dynamics.
  def comp rate_of_blood_flow_from_veins_to_right_atrium as
    // Inputs from other components
    var PVS: mmHg {priv: none, pub: in};
    var PR1: mmHg {priv: none, pub: in};
    var RVG: mmHg_minute_per_L {priv: none, pub: in};
    var QRO: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var QVO: L_per_minute {priv: none, pub: out};
    // Internal variables
    var PGV: mmHg {priv: none, pub: none};
    // value: CD17: The temporary pressure gradient (PGV) from the midpoint of the veins to the exit of the veins into the chest equals the venous pressure (PVS) minus the pressure at the exit point (PR1).
    PGV = PVS-PR1;
    // value: CD19: The rate of blood flow out of the veins into the right atrium (QVO) is equal to the pressure gradient through the venous system (PGV) divided by the resistance to blood flow through the venous system (RVS).
    QVO = PGV/RVG;
    // <apply id="CD19A - DAMPING!!!">
    // 	<eq/>
    // 	<ci>QVO</ci>
    // 	<apply>
    // 		<plus/>
    // 		<ci>QRO</ci>
    // 		<apply>
    // 			<divide/>
    // 			<apply>
    // 				<minus/>
    // 				<ci>QVO</ci>
    // 				<ci>QRO</ci>
    // 			</apply>
    // 			<ci>X</ci>
    // 		</apply>
    // 	</apply>
    // </apply>
  enddef;
  // INPUT CONNECTIONS
  def map between rate_of_blood_flow_from_veins_to_right_atrium and venous_average_pressure for
    vars PVS and PVS;
  enddef;
  def map between rate_of_blood_flow_from_veins_to_right_atrium and venous_outflow_pressure_into_heart for
    vars PR1 and PR1;
  enddef;
  def map between rate_of_blood_flow_from_veins_to_right_atrium and resistance_from_veins_to_right_atrium for
    vars RVG and RVG;
  enddef;
  def map between rate_of_blood_flow_from_veins_to_right_atrium and right_ventricular_output for
    vars QRO and QRO;
  enddef;
  // ========================================	VENOUS RESISTANCE	=============================================

  // value: CD50, CD51, CD52, CD53, CD54, and CD55: A curve-shaping series to calculate a resistance multiplier factor (RV1) from the effect of vascular stretch in the venous system, based on two factors: the input pressure to the venous system from the capillaries (PC) and a basal systemic venous multiplier (RVSM). The damping factor in CD54 slows the response and prevents oscillation of the system. NB - The damping in CD54 has not been coded!!!! CD56: Calculation of the venous resistance (RVS) after modification of the basic venous resistance multiplier factor (RV1) by various other multiplier factors: a multiplier factor for the effect of angiotensin (ANUVN), a multiplier factor for the effect of the autonomic nervous system (AVE), and a multiplier factor for the effect of blood viscosity on venous resistance (VIM).
  def comp venous_resistance as
    // Inputs from other components
    var PC: mmHg {priv: none, pub: in};
    var VIM: dimensionless {priv: none, pub: in};
    var AVE: dimensionless {priv: none, pub: in};
    var ANUVN: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var RVS: mmHg_minute_per_L {priv: none, pub: out};
    // Parameters from parameter_file
    var CN7: dimensionless {priv: none, pub: in};
    var CN2: per_mmHg {priv: none, pub: in};
    var RVSM: mmHg_minute_per_L {priv: none, pub: in};
    // Internal variables
    var CN3: dimensionless {priv: none, pub: none};
    var RV1: mmHg_minute_per_L {priv: none, pub: none};
    // value: CD50, CD51, CD52, CD53, CD54, and CD55: A curve-shaping series to calculate a resistance multiplier factor (RV1) from the effect of vascular stretch in the venous system, based on two factors: the input pressure to the venous system from the capillaries (PC) and a basal systemic venous multiplier (RVSM). The damping factor in CD54 slows the response and prevents oscillation of the system. NB - The damping in CD54 has not been coded!!!!
    CN3 = ((PC-17{mmHg})*CN7+17{mmHg})*CN2;
    // value: CD50, CD51, CD52, CD53, CD54, and CD55: A curve-shaping series to calculate a resistance multiplier factor (RV1) from the effect of vascular stretch in the venous system, based on two factors: the input pressure to the venous system from the capillaries (PC) and a basal systemic venous multiplier (RVSM). The damping factor in CD54 slows the response and prevents oscillation of the system. NB - The damping in CD54 has not been coded!!!!
    RV1 = RVSM/CN3;
    // value: CD56: Calculation of the venous resistance (RVS) after modification of the basic venous resistance multiplier factor (RV1) by various other multiplier factors: a multiplier factor for the effect of angiotensin (ANUVN), a multiplier factor for the effect of the autonomic nervous system (AVE), and a multiplier factor for the effect of blood viscosity on venous resistance (VIM).
    RVS = AVE*RV1*VIM*ANUVN;
  enddef;
  // INPUT CONNECTIONS
  def map between venous_resistance and circulatory_dynamics for
    vars RVS and RVS;
    vars PC and PC;
    vars VIM and VIM;
    vars AVE and AVE;
    vars ANUVN and ANUVN;
  enddef;
  // PARAMETER CONNECTIONS
  def map between venous_resistance and circulatory_dynamics_parameter_values for
    vars CN7 and CN7;
    vars CN2 and CN2;
    vars RVSM and RVSM;
  enddef;
  // ========================================	NON-MUSCLE, NON-RENAL VENOUS RESISTANCE	=============================================

  // value: CD57: Calculation of that proportion of the renal venous resistance that is ascribable to blood flow through the systemic circulation besides the muscles and the kidneys, by multiplying the actual venous resistance (RVS) times a proportionality factor.
  def comp NM_NR_venous_resistance as
    // Inputs from other components
    var RVS: mmHg_minute_per_L {priv: none, pub: in};
    // Outputs to other components
    var NNRVR: mmHg_minute_per_L {priv: none, pub: out};
    // value: CD57: Calculation of that proportion of the renal venous resistance that is ascribable to blood flow through the systemic circulation besides the muscles and the kidneys, by multiplying the actual venous resistance (RVS) times a proportionality factor.
    NNRVR = RVS*1.79{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between NM_NR_venous_resistance and venous_resistance for
    vars RVS and RVS;
  enddef;
  // ========================================	SYSTEMIC ARTERIAL SYSTEM	=============================================

  // value: Containment grouping component for "arterial_blood_volume", "arterial_pressure_and_pressure_gradient", "pressure_effect_on_arterial_distention", "NR_systemic_arterial_resistance_multiplier" and "NM_NR_arterial_resistance".
  def comp systemic_arterial_system as
  enddef;
  // ========================================	ARTERIAL BLOOD VOLUME	=============================================

  // value: CD1: The rate of change of blood volume in the aorta (DAS) is equal to the rate of inflow to the aorta from the heart (QLO) minus the rate of outflow from the aorta through the systemic circulation (QAO) plus any flow that occurs passively through the left ventricle (QLO1) because of a left atrial pressure that is greater than aortic pressure, as occurs in the last stages of left ventricular failure. CD2: Integration of the rate of change of volume in the aorta (DAS) gives an output which is a temporary value for the volume of blood in the systemic arteries at any given instant. CD3: This block calculates the portion of any change in blood volume that has occurred since the last iteration (VBD) that is partitioned into the arteries. The remainder is partitioned into other sections of the circulation. CD4: The volume of blood in the arterial tree at any given instant (VAS) is equal to the temporary calculation in volume of blood as described in CD2 plus the portion of a blood volume change as calculated in CD3.
  def comp arterial_blood_volume as
    // Inputs from other components
    var QLO: L_per_minute {priv: none, pub: in};
    var QAO: L_per_minute {priv: none, pub: in};
    var VBD: litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VAS: litre {priv: none, pub: out};
    var VAS1: litre {init: 0.862514, priv: none, pub: out};
    // Internal variables
    var DAS: L_per_minute {priv: none, pub: none};
    // value: CD1: The rate of change of blood volume in the aorta (DAS) is equal to the rate of inflow to the aorta from the heart (QLO) minus the rate of outflow from the aorta through the systemic circulation (QAO) plus any flow that occurs passively through the left ventricle (QLO1) because of a left atrial pressure that is greater than aortic pressure, as occurs in the last stages of left ventricular failure.
    DAS = QLO-QAO;
    // value: CD2: Integration of the rate of change of volume in the aorta (DAS) gives an output which is a temporary value for the volume of blood in the systemic arteries at any given instant.
    ode(VAS1, time) = DAS;
    // value: CD3: This block calculates the portion of any change in blood volume that has occurred since the last iteration (VBD) that is partitioned into the arteries. The remainder is partitioned into other sections of the circulation. CD4: The volume of blood in the arterial tree at any given instant (VAS) is equal to the temporary calculation in volume of blood as described in CD2 plus the portion of a blood volume change as calculated in CD3.
    VAS = VAS1+VBD*0.261{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between arterial_blood_volume and left_ventricular_output for
    vars QLO and QLO;
  enddef;
  def map between arterial_blood_volume and systemic_blood_flow for
    vars QAO and QAO;
  enddef;
  def map between arterial_blood_volume and total_blood_volume_change for
    vars VAS1 and VAS1;
    vars VBD and VBD;
  enddef;
  def map between arterial_blood_volume and circulatory_dynamics for
    vars time and time;
  enddef;
  // ========================================	ARTERIAL PRESSURE AND PRESSURE GRADIENT	=============================================

  // value: CD5: The excess volume in the arterial tree (VAE) over and above the volume that is required to barely fill the aorta at zero pressure is calculated by subtracting a constant (which is equal to "VO") from the instantaneous volume in the aorta (VAS). CD6: Arterial pressure (PA) is equal to the excess volume in the arterial tree (VAE) divided by a constant which is the capacitance of the arterial tree. CD78: The output of this block is the total pressure gradient from the arterial pressure (PA) to the right atrial pressure (PRA).
  def comp arterial_pressure_and_pressure_gradient as
    // Inputs from other components
    var VAS: litre {priv: none, pub: in};
    var PRA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var PA: mmHg {priv: none, pub: out};
    var PAG: mmHg {priv: none, pub: out};
    // Internal variables
    var VAE: litre {priv: none, pub: none};
    // value: CD5: The excess volume in the arterial tree (VAE) over and above the volume that is required to barely fill the aorta at zero pressure is calculated by subtracting a constant (which is equal to "VO") from the instantaneous volume in the aorta (VAS).
    VAE = VAS-0.495{litre};
    // value: CD6: Arterial pressure (PA) is equal to the excess volume in the arterial tree (VAE) divided by a constant which is the capacitance of the arterial tree.
    PA = VAE/0.00355{L_per_mmHg};
    // value: CD78: The output of this block is the total pressure gradient from the arterial pressure (PA) to the right atrial pressure (PRA).
    PAG = PA-PRA;
  enddef;
  // INPUT CONNECTIONS
  def map between arterial_pressure_and_pressure_gradient and arterial_blood_volume for
    vars VAS and VAS;
  enddef;
  def map between arterial_pressure_and_pressure_gradient and right_atrial_pressure for
    vars PRA and PRA;
  enddef;
  // ========================================	PRESSURE EFFECT ON ARTERIAL DISTENTION/RESISTANCE	=============================================

  // value: CD44 and CD45: Calculation of the effect of arterial vascular distension on resistance caused by the arterial pressure itself (PA), giving a multiplier output (PAM) that is then used to calculate the effect of distension on systemic resistance. The exponential factor (PAEX) modifies the extent to which pressure affects the degree of distension on an exponential basis.
  def comp pressure_effect_on_arterial_distention as
    // Inputs from other components
    var PA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var PAM: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var PAEX: dimensionless {priv: none, pub: in};
    // value: CD44 and CD45: Calculation of the effect of arterial vascular distension on resistance caused by the arterial pressure itself (PA), giving a multiplier output (PAM) that is then used to calculate the effect of distension on systemic resistance. The exponential factor (PAEX) modifies the extent to which pressure affects the degree of distension on an exponential basis.
    PAM = pow(PA/100{mmHg}, PAEX);
  enddef;
  // INPUT CONNECTIONS
  def map between pressure_effect_on_arterial_distention and arterial_pressure_and_pressure_gradient for
    vars PA and PA;
  enddef;
  // PARAMETER CONNECTIONS
  def map between pressure_effect_on_arterial_distention and circulatory_dynamics_parameter_values for
    vars PAEX and PAEX;
  enddef;
  // ======================================		NON-RENAL SYSTEMIC ARTERIAL RESISTANCE MULTIPLIER		=======================================

  // value: CD46 and CD47: Calculation of the effect of multiple factors on systemic arterial resistance in the muscles and in the soft tissues besides the kidneys to give a multiplier factor (R1). The input factors that contribute to this multiplier factor are: a multiplier factor for the degree of sympathetic stimulation (AUM), a multiplier factor for blood viscosity (VIM), a multiplier factor for the effect of angiotensin on vascular resistance (ANU), a multiplier factor for the effect of antidiuretic hormone (ADHMV), a division factor for the effect of feedback from the atrial stretch receptors (ATRRFB), a division factor caused by dilation of the arteries in response to changes in arterial pressure (PAM), and a multiplier factor (PAMK) for any other effect that might constrict the arteries.
  def comp non_renal_systemic_arterial_resistance_multiplier as
    // Inputs from other components
    var ANU: dimensionless {priv: none, pub: in};
    var ADHMV: dimensionless {priv: none, pub: in};
    var AUM: dimensionless {priv: none, pub: in};
    var VIM: dimensionless {priv: none, pub: in};
    var PAMK: dimensionless {priv: none, pub: in};
    var PAM: dimensionless {priv: none, pub: in};
    var ATRRFB: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var R1: dimensionless {priv: none, pub: out};
    // value: CD46 and CD47: Calculation of the effect of multiple factors on systemic arterial resistance in the muscles and in the soft tissues besides the kidneys to give a multiplier factor (R1). The input factors that contribute to this multiplier factor are: a multiplier factor for the degree of sympathetic stimulation (AUM), a multiplier factor for blood viscosity (VIM), a multiplier factor for the effect of angiotensin on vascular resistance (ANU), a multiplier factor for the effect of antidiuretic hormone (ADHMV), a division factor for the effect of feedback from the atrial stretch receptors (ATRRFB), a division factor caused by dilation of the arteries in response to changes in arterial pressure (PAM), and a multiplier factor (PAMK) for any other effect that might constrict the arteries.
    R1 = ANU*ADHMV*AUM*VIM*PAMK/PAM/ATRRFB;
  enddef;
  // INPUT CONNECTIONS
  def map between non_renal_systemic_arterial_resistance_multiplier and circulatory_dynamics for
    vars ANU and ANU;
    vars ADHMV and ADHMV;
    vars AUM and AUM;
    vars VIM and VIM;
    vars PAMK and PAMK;
    vars ATRRFB and ATRRFB;
  enddef;
  def map between non_renal_systemic_arterial_resistance_multiplier and pressure_effect_on_arterial_distention for
    vars PAM and PAM;
  enddef;
  // ========================================	NON-MUSCLE, NON-RENAL ARTERIAL RESISTANCE	=============================================

  // value: CD49: Modification of the resistance multiplier factor (R1) in the tissues of the body besides the muscles and the kidneys caused by the basic resistance through these tissues (RAR), times the degree of effect of an autoregulation multiplier factor (ARM) caused by autoregulation in these tissues, times RMULT1 for experiments on postulations of very rapid autoregulation, and times MYOGRS for resistance changes caused by myogenic autoregulation.
  def comp NM_NR_arterial_resistance as
    // Inputs from other components
    var R1: dimensionless {priv: none, pub: in};
    var ARM: dimensionless {priv: none, pub: in};
    var MYOGRS: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var NNRAR: mmHg_minute_per_L {priv: none, pub: out};
    // Parameters from parameter_file
    var RAR: mmHg_minute_per_L {priv: none, pub: in};
    var RMULT1: dimensionless {priv: none, pub: in};
    // value: CD49: Modification of the resistance multiplier factor (R1) in the tissues of the body besides the muscles and the kidneys caused by the basic resistance through these tissues (RAR), times the degree of effect of an autoregulation multiplier factor (ARM) caused by autoregulation in these tissues, times RMULT1 for experiments on postulations of very rapid autoregulation, and times MYOGRS for resistance changes caused by myogenic autoregulation.
    NNRAR = RAR*ARM*R1*MYOGRS*RMULT1;
  enddef;
  // INPUT CONNECTIONS
  def map between NM_NR_arterial_resistance and non_renal_systemic_arterial_resistance_multiplier for
    vars R1 and R1;
  enddef;
  def map between NM_NR_arterial_resistance and circulatory_dynamics for
    vars ARM and ARM;
    vars MYOGRS and MYOGRS;
  enddef;
  // PARAMETER CONNECTIONS
  def map between NM_NR_arterial_resistance and circulatory_dynamics_parameter_values for
    vars RAR and RAR;
    vars RMULT1 and RMULT1;
  enddef;
  // ========================================	PRESSURE GRADIENT FROM ARTERIES TO VEINS	=============================================

  // value: CD7: The pressure gradient from the aorta to the major veins in the systemic circulation (PGS) is equal to the pressure in the aorta (PA) minus the average pressure in the major veins (PVS).
  def comp pressure_gradient_from_arteries_to_veins as
    // Inputs from other components
    var PA: mmHg {priv: none, pub: in};
    var PVS: mmHg {priv: none, pub: in};
    // Outputs to other components
    var PGS: mmHg {priv: none, pub: out};
    // value: CD7: The pressure gradient from the aorta to the major veins in the systemic circulation (PGS) is equal to the pressure in the aorta (PA) minus the average pressure in the major veins (PVS).
    PGS = PA-PVS;
  enddef;
  // INPUT CONNECTIONS
  def map between pressure_gradient_from_arteries_to_veins and arterial_pressure_and_pressure_gradient for
    vars PA and PA;
  enddef;
  def map between pressure_gradient_from_arteries_to_veins and venous_average_pressure for
    vars PVS and PVS;
  enddef;
  // ========================================	MUSCLE SYSTEMIC RESISTANCE		=============================================

  // value: CD48: Calculation of the resistance through the systemic muscles (RSM) by multiplying the basic resistance through the muscles (RAM) times the multiplier factor calculated in CD47 (R1), times another multiplier factor resulting from local tissue blood flow autoregulation in the muscles (AMM), times RMULT1 for experiments on postulations of very rapid autoregulation, and times MYOGRS for resistance changes caused by possible myogenic autoregulation.
  def comp M_systemic_resistance as
    // Inputs from other components
    var R1: dimensionless {priv: none, pub: in};
    var AMM: dimensionless {priv: none, pub: in};
    var MYOGRS: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var RSM: mmHg_minute_per_L {priv: none, pub: out};
    // Parameters from parameter_file
    var RAM: mmHg_minute_per_L {priv: none, pub: in};
    var RMULT1: dimensionless {priv: none, pub: in};
    // value: CD48: Calculation of the resistance through the systemic muscles (RSM) by multiplying the basic resistance through the muscles (RAM) times the multiplier factor calculated in CD47 (R1), times another multiplier factor resulting from local tissue blood flow autoregulation in the muscles (AMM), times RMULT1 for experiments on postulations of very rapid autoregulation, and times MYOGRS for resistance changes caused by possible myogenic autoregulation.
    RSM = RAM*AMM*R1*MYOGRS*RMULT1;
  enddef;
  // INPUT CONNECTIONS
  def map between M_systemic_resistance and non_renal_systemic_arterial_resistance_multiplier for
    vars R1 and R1;
  enddef;
  def map between M_systemic_resistance and circulatory_dynamics for
    vars AMM and AMM;
    vars MYOGRS and MYOGRS;
  enddef;
  // PARAMETER CONNECTIONS
  def map between M_systemic_resistance and circulatory_dynamics_parameter_values for
    vars RAM and RAM;
    vars RMULT1 and RMULT1;
  enddef;
  // ========================================	TOTAL NON-MUSCLE, NON-RENAL SYSTEMIC RESISTANCE	=============================================

  // value: CD58: Calculation of the resistance to blood flow through the nonmuscular and nonkidney portions of the systemic vasculature (RSN) by adding the arterial portion of the resistance as calculated from CD49 and the venous portion of the resistance calculated from CD57.
  def comp total_NM_NR_systemic_resistance as
    // Inputs from other components
    var NNRAR: mmHg_minute_per_L {priv: none, pub: in};
    var NNRVR: mmHg_minute_per_L {priv: none, pub: in};
    // Outputs to other components
    var RSN: mmHg_minute_per_L {priv: none, pub: out};
    // value: CD58: Calculation of the resistance to blood flow through the nonmuscular and nonkidney portions of the systemic vasculature (RSN) by adding the arterial portion of the resistance as calculated from CD49 and the venous portion of the resistance calculated from CD57.
    RSN = NNRAR+NNRVR;
  enddef;
  // INPUT CONNECTIONS
  def map between total_NM_NR_systemic_resistance and NM_NR_arterial_resistance for
    vars NNRAR and NNRAR;
  enddef;
  def map between total_NM_NR_systemic_resistance and NM_NR_venous_resistance for
    vars NNRVR and NNRVR;
  enddef;
  // ========================================	BLOOD FLOW THROUGH MUSCLE TISSUES	=============================================

  // value: CD9: The blood flow through the muscles (BFM) is equal to the pressure gradient through the systemic circulation to the major veins (PGS) divided by the resistance to the blood flow through the muscles (RSM).
  def comp blood_flow_through_M_tissues as
    // Inputs from other components
    var PGS: mmHg {priv: none, pub: in};
    var RSM: mmHg_minute_per_L {priv: none, pub: in};
    // Outputs to other components
    var BFM: L_per_minute {priv: none, pub: out};
    // value: CD9: The blood flow through the muscles (BFM) is equal to the pressure gradient through the systemic circulation to the major veins (PGS) divided by the resistance to the blood flow through the muscles (RSM).
    BFM = PGS/RSM;
  enddef;
  // INPUT CONNECTIONS
  def map between blood_flow_through_M_tissues and pressure_gradient_from_arteries_to_veins for
    vars PGS and PGS;
  enddef;
  def map between blood_flow_through_M_tissues and M_systemic_resistance for
    vars RSM and RSM;
  enddef;
  // ========================================	BLOOD FLOW THROUGH NON-MUSCLE, NON-RENAL TISSUES	=============================================

  // value: CD8: Blood flow through the nonmuscular portions of the body besides the kidneys (BFN) is equal to the pressure gradient through the systemic circulation (PGS) divided by the resistance through the nonmuscular portions of the body besides the kidneys (RSN).
  def comp blood_flow_through_NM_NR_tissues as
    // Inputs from other components
    var PGS: mmHg {priv: none, pub: in};
    var RSN: mmHg_minute_per_L {priv: none, pub: in};
    // Outputs to other components
    var BFN: L_per_minute {priv: none, pub: out};
    // value: CD8: Blood flow through the nonmuscular portions of the body besides the kidneys (BFN) is equal to the pressure gradient through the systemic circulation (PGS) divided by the resistance through the nonmuscular portions of the body besides the kidneys (RSN).
    BFN = PGS/RSN;
  enddef;
  // INPUT CONNECTIONS
  def map between blood_flow_through_NM_NR_tissues and pressure_gradient_from_arteries_to_veins for
    vars PGS and PGS;
  enddef;
  def map between blood_flow_through_NM_NR_tissues and total_NM_NR_systemic_resistance for
    vars RSN and RSN;
  enddef;
  // ========================================	BLOOD FLOW THROUGH AV FISTULAS	=============================================

  // value: CD79: Calculation of the rate of blood flow through a fistula (FISFLO) by multiplying a conductance factor for the fistula (FIS) times the pressure difference from the arteries to the right atrium as calculated by Block CD78.
  def comp blood_flow_through_AV_fistulas as
    // Inputs from other components
    var PAG: mmHg {priv: none, pub: in};
    // Outputs to other components
    var FISFLO: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var FIS: L_per_minute_per_mmHg {priv: none, pub: in};
    // value: CD79: Calculation of the rate of blood flow through a fistula (FISFLO) by multiplying a conductance factor for the fistula (FIS) times the pressure difference from the arteries to the right atrium as calculated by Block CD78.
    FISFLO = PAG*FIS;
  enddef;
  // INPUT CONNECTIONS
  def map between blood_flow_through_AV_fistulas and arterial_pressure_and_pressure_gradient for
    vars PAG and PAG;
  enddef;
  // PARAMETER CONNECTIONS
  def map between blood_flow_through_AV_fistulas and circulatory_dynamics_parameter_values for
    vars FIS and FIS;
  enddef;
  // ========================================	SYSTEMIC BLOOD FLOW	=============================================

  // value: CD10: The rate of blood flow out of the arterial tree (QAO) is equal to the blood flow through the muscles (BFM), the blood flow through the nonmuscular portions of the body (BFN), the blood flow through the kidneys (RBF) and the blood flow through any artificial AV fistulas (FISFLO).
  def comp systemic_blood_flow as
    // Inputs from other components
    var BFM: L_per_minute {priv: none, pub: in};
    var BFN: L_per_minute {priv: none, pub: in};
    var RBF: L_per_minute {priv: none, pub: in};
    var FISFLO: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var SYSFLO: L_per_minute {priv: none, pub: out};
    var QAO: L_per_minute {priv: none, pub: out};
    // value: CD10: The rate of blood flow out of the arterial tree (QAO) is equal to the blood flow through the muscles (BFM), the blood flow through the nonmuscular portions of the body (BFN), the blood flow through the kidneys (RBF) and the blood flow through any artificial AV fistulas (FISFLO).
    SYSFLO = BFM+BFN+RBF;
    QAO = SYSFLO+FISFLO;
  enddef;
  // INPUT CONNECTIONS
  def map between systemic_blood_flow and blood_flow_through_M_tissues for
    vars BFM and BFM;
  enddef;
  def map between systemic_blood_flow and blood_flow_through_NM_NR_tissues for
    vars BFN and BFN;
  enddef;
  def map between systemic_blood_flow and circulatory_dynamics for
    vars QAO and QAO;
    vars RBF and RBF;
  enddef;
  def map between systemic_blood_flow and blood_flow_through_AV_fistulas for
    vars FISFLO and FISFLO;
  enddef;
  // ========================================	TOTAL PERIPHERAL RESISTANCE		=============================================

  // value: CD80: The total peripheral resistance (RTP) is equal to the total pressure drop from the arteries to the right atrium (from Block CD78) divided by the total blood flow through the systemic circulation (QAO).
  def comp total_peripheral_resistance as
    // Inputs from other components
    var PAG: mmHg {priv: none, pub: in};
    var QAO: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var RTP: mmHg_minute_per_L {priv: none, pub: out};
    // value: CD80: The total peripheral resistance (RTP) is equal to the total pressure drop from the arteries to the right atrium (from Block CD78) divided by the total blood flow through the systemic circulation (QAO).
    RTP = PAG/QAO;
  enddef;
  // INPUT CONNECTIONS
  def map between total_peripheral_resistance and arterial_pressure_and_pressure_gradient for
    vars PAG and PAG;
  enddef;
  def map between total_peripheral_resistance and systemic_blood_flow for
    vars QAO and QAO;
  enddef;
  // ==============================================		CIRCULATORY DYNAMICS PARAMETER VALUES		============================================

  def comp circulatory_dynamics_parameter_values as
    var HTAUML: dimensionless {init: 0.4, priv: none, pub: out};
    // autonomic sensitivity on PRA [P]
    var QRF: L_per_minute {init: 0.15, priv: none, pub: out};
    // left ventricle funct effect on right ventricle function [P]
    var HSR: dimensionless {init: 1, priv: none, pub: out};
    // basic strength of right ventricle
    var HSL: dimensionless {init: 1, priv: none, pub: out};
    // basic strength of left ventricle
    var ANY: litre {init: -0.2, priv: none, pub: out};
    // sensitivity controller of ANU for venous volume [P]
    var CV: L_per_mmHg {init: 0.1, priv: none, pub: out};
    // venous compliance [P]
    var PR1LL: mmHg {init: 0, priv: none, pub: out};
    // PR1 lower limit [P]
    var RVSM: mmHg_minute_per_L {init: 1, priv: none, pub: out};
    // basal systemic venous multiplier [P]
    var CN2: per_mmHg {init: 0.0212, priv: none, pub: out};
    // curve fitting coefficient, calculation of CN3 [P]
    var CN7: dimensionless {init: 0.2, priv: none, pub: out};
    // curve fitting coefficient, calculation of CN3 [P]
    var PAEX: dimensionless {init: 2, priv: none, pub: out};
    // exponential factor affecting PAM [P]
    var RAR: mmHg_minute_per_L {init: 30.52, priv: none, pub: out};
    // basal non-muscle vascular resistance [P]
    var RMULT1: dimensionless {init: 1, priv: none, pub: out};
    // very rapid autoregulation multiplier (if AUTO > 0)
    var RAM: mmHg_minute_per_L {init: 96.3, priv: none, pub: out};
    // basal muscle vascular resistance [P]
    var FIS: L_per_minute_per_mmHg {init: 0, priv: none, pub: out};
    // fistula conductance factor
  enddef;
  // ============================================================================================================================================================
  // ========================================================	ELECTROLYTES MODEL	===========================================================

  // value: Extracellular and intracellular fluid electrolytes and volumes. Encapsulation grouping component containing all the components in the Electrolytes Model. The inputs and outputs of the Electrolytes Model must be passed by this component.
  def comp electrolytes as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var AMK: dimensionless {priv: out, pub: in};
    var TVD: L_per_minute {priv: out, pub: in};
    var NOD: monovalent_mEq_per_minute {priv: out, pub: in};
    var STH: dimensionless {priv: out, pub: in};
    var KOD: monovalent_mEq_per_minute {priv: out, pub: in};
    var VUD: L_per_minute {priv: out, pub: in};
    // Outputs to components in other models
    var CKE: monovalent_mEq_per_litre {priv: in, pub: out};
    var VEC: litre {priv: in, pub: out};
    var CNA: monovalent_mEq_per_litre {priv: in, pub: out};
    var VTW: litre {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  // <connection>
  // 	<map_components component_1="electrolytes" component_2="extracellular_K_concentration"/>
  // 	<map_variables variable_1="CKE" variable_2="CKE"/>
  // </connection>
  def map between electrolytes and extracellular_fluid_volume for
    vars VEC and VEC;
  enddef;
  // <connection>
  // 	<map_components component_1="electrolytes" component_2="extracellular_Na_concentration"/>
  // 	<map_variables variable_1="CNA" variable_2="CNA"/>
  // </connection>
  // <connection>
  // 	<map_components component_1="electrolytes" component_2="total_body_water"/>
  // 	<map_variables variable_1="VTW" variable_2="VTW"/>
  // </connection>
  // ========================================	EXTRACELLULAR SODIUM CONCENTRATION		=============================================

  // value: EL1, EL2, and EL3: The rate of intake of sodium (NAINT) is equal to the normal rate of sodium intake (NID) times a salt appetite multiplier factor (STH). The rate of change of sodium in the extracellular fluid (NED) is equal to the rate of intake of sodium (NAINT), minus the rate of excretion of sodium in the urine (NOD), plus sodium entering the body in transfused plasma (TRPL). EL4: The instantaneous quantity of sodium in the extracellular fluid (NAE) is calculated by integrating with respect to time the rate of change of sodium in the extracellular fluid (NED). EL5: The concentration of sodium in the extracellular fluid (CNA) is equal to the quantity of sodium in the extracellular fluid (NAE) divided by the extracellular fluid volume (VEC).
  def comp extracellular_Na_concentration as
    // Inputs from other components
    var STH: dimensionless {priv: none, pub: in};
    var NOD: monovalent_mEq_per_minute {priv: none, pub: in};
    var VEC: litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var CNA: monovalent_mEq_per_litre {priv: none, pub: out};
    // Parameters from parameter_file
    var NID: monovalent_mEq_per_minute {priv: none, pub: in};
    var TRPL: L_per_minute {priv: none, pub: in};
    // Internal variables
    var NED: monovalent_mEq_per_minute {priv: none, pub: none};
    var NAE: monovalent_mEq {init: 2109.91, priv: none, pub: none};
    // value: EL1, EL2, and EL3: The rate of intake of sodium (NAINT) is equal to the normal rate of sodium intake (NID) times a salt appetite multiplier factor (STH). The rate of change of sodium in the extracellular fluid (NED) is equal to the rate of intake of sodium (NAINT), minus the rate of excretion of sodium in the urine (NOD), plus sodium entering the body in transfused plasma (TRPL).
    NED = NID*STH-NOD+TRPL*142{monovalent_mEq_per_litre};
    // value: EL4: The instantaneous quantity of sodium in the extracellular fluid (NAE) is calculated by integrating with respect to time the rate of change of sodium in the extracellular fluid (NED).
    ode(NAE, time) = NED;
    // value: EL5: The concentration of sodium in the extracellular fluid (CNA) is equal to the quantity of sodium in the extracellular fluid (NAE) divided by the extracellular fluid volume (VEC).
    CNA = NAE/VEC;
  enddef;
  // INPUT CONNECTIONS
  def map between extracellular_Na_concentration and electrolytes for
    vars CNA and CNA;
    vars STH and STH;
    vars NOD and NOD;
    vars time and time;
  enddef;
  def map between extracellular_Na_concentration and extracellular_fluid_volume for
    vars VEC and VEC;
  enddef;
  // PARAMETER CONNECTIONS
  def map between extracellular_Na_concentration and electrolytes_parameter_values for
    vars TRPL and TRPL;
    vars NID and NID;
  enddef;
  // ==================================	ALDOSTERONE EFFECT ON CELLULAR POTASSIUM DISTRIBUTION	=====================================

  // value: EL9, EL10, and EL11: Calculation of an aldosterone multiplier factor for the effect of aldosterone (AMK) on the distribution of potassium across the cell membranes. The variable (ALCLK) is a sensitivity control for adjusting the effect of the aldosterone on the cellular membrane distribution relationship of potassium on the two sides of the cell membranes.
  def comp aldosterone_effect_on_cellular_K_distribution as
    // Inputs from other components
    var AMK: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AMK1: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ALCLK: dimensionless {priv: none, pub: in};
    // value: EL9, EL10, and EL11: Calculation of an aldosterone multiplier factor for the effect of aldosterone (AMK) on the distribution of potassium across the cell membranes. The variable (ALCLK) is a sensitivity control for adjusting the effect of the aldosterone on the cellular membrane distribution relationship of potassium on the two sides of the cell membranes.
    AMK1 = (AMK-1{dimensionless})*ALCLK+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between aldosterone_effect_on_cellular_K_distribution and electrolytes for
    vars AMK and AMK;
  enddef;
  // PARAMETER CONNECTIONS
  def map between aldosterone_effect_on_cellular_K_distribution and electrolytes_parameter_values for
    vars ALCLK and ALCLK;
  enddef;
  // ========================================	EXTRACELLULAR POTASSIUM CONCENTRATION	=============================================

  // value: EL6: The rate of change of the total quantity of potassium in all of the body fluids (KTOTD) is equal to the rate of intake of potassium (KID) minus the rate of excretion of potassium in the urine (KOD). EL7: The total quantity of potassium in all the body fluids at any given time (KTOT) is calculated by integrating with respect to time the rate of change of the potassium in all of the body fluids (KTOTD). EL7A: Calculation of the freely mobile potassium in the body (approximately 616) by subtracting the relatively fixed potassium in all the cells of the body (approximately 3000) from the total potassium of the body (KTOT). EL7B: Calculation of the total potassium in the extracellular fluid of the body (KE) by dividing the total freely mobile calcium from Block EL7A by a constant factor of 9.3333 (which is a distribution relationship of the freely mobile potassium between the intracellular and extracellular fluid), and divided by a factor from Block EL11 that determines the activity of aldosterone on the distribution relationship of potassium across the cell membranes. EL8: The concentration of potassium in the extracellular fluid (CKE) is equal to the quantity of potassium in the extracellular fluid (KE) divided by the volume of extracellular fluid (VEC).
  def comp extracellular_K_concentration as
    // Inputs from other components
    var KOD: monovalent_mEq_per_minute {priv: none, pub: in};
    var AMK1: dimensionless {priv: none, pub: in};
    var VEC: litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var CKE: monovalent_mEq_per_litre {priv: none, pub: out};
    var KE: monovalent_mEq {priv: none, pub: out};
    var KTOT: monovalent_mEq {init: 3622.54, priv: none, pub: out};
    // Parameters from parameter_file
    var KID: monovalent_mEq_per_minute {priv: none, pub: in};
    // Internal variables
    var KTOTD: monovalent_mEq_per_minute {priv: none, pub: none};
    // value: EL6: The rate of change of the total quantity of potassium in all of the body fluids (KTOTD) is equal to the rate of intake of potassium (KID) minus the rate of excretion of potassium in the urine (KOD).
    KTOTD = KID-KOD;
    // value: EL7: The total quantity of potassium in all the body fluids at any given time (KTOT) is calculated by integrating with respect to time the rate of change of the potassium in all of the body fluids (KTOTD).
    ode(KTOT, time) = KTOTD;
    // value: EL7A: Calculation of the freely mobile potassium in the body (approximately 616) by subtracting the relatively fixed potassium in all the cells of the body (approximately 3000) from the total potassium of the body (KTOT). EL7B: Calculation of the total potassium in the extracellular fluid of the body (KE) by dividing the total freely mobile calcium from Block EL7A by a constant factor of 9.3333 (which is a distribution relationship of the freely mobile potassium between the intracellular and extracellular fluid), and divided by a factor from Block EL11 that determines the activity of aldosterone on the distribution relationship of potassium across the cell membranes.
    KE = (KTOT-3000{monovalent_mEq})/(AMK1*9.3333{dimensionless});
    // value: EL8: The concentration of potassium in the extracellular fluid (CKE) is equal to the quantity of potassium in the extracellular fluid (KE) divided by the volume of extracellular fluid (VEC).
    CKE = KE/VEC;
  enddef;
  // INPUT CONNECTIONS
  def map between extracellular_K_concentration and electrolytes for
    vars CKE and CKE;
    vars KOD and KOD;
    vars time and time;
  enddef;
  def map between extracellular_K_concentration and aldosterone_effect_on_cellular_K_distribution for
    vars AMK1 and AMK1;
  enddef;
  def map between extracellular_K_concentration and extracellular_fluid_volume for
    vars VEC and VEC;
  enddef;
  // PARAMETER CONNECTIONS
  def map between extracellular_K_concentration and electrolytes_parameter_values for
    vars KID and KID;
  enddef;
  // ========================================	INTRACELLULAR POTASSIUM CONCENTRATION	=============================================

  // value: EL12: Calculation of the total potassium inside all the cells of the body (KI) by subtracting the potassium in the extracellular fluids (KE) from the total potassium in the body (KTOT). EL13: Calculation of the concentration of potassium inside the cells of the body (CKI) by dividing the total potassium inside all the cells (KI) by the volume of fluid inside all the cells (VIC).
  def comp intracellular_K_concentration as
    // Inputs from other components
    var KTOT: monovalent_mEq {priv: none, pub: in};
    var KE: monovalent_mEq {priv: none, pub: in};
    var VIC: litre {priv: none, pub: in};
    // Outputs to other components
    var CKI: monovalent_mEq_per_litre {priv: none, pub: out};
    // Internal variables
    var KI: monovalent_mEq {priv: none, pub: none};
    // value: EL12: Calculation of the total potassium inside all the cells of the body (KI) by subtracting the potassium in the extracellular fluids (KE) from the total potassium in the body (KTOT).
    KI = KTOT-KE;
    // value: EL13: Calculation of the concentration of potassium inside the cells of the body (CKI) by dividing the total potassium inside all the cells (KI) by the volume of fluid inside all the cells (VIC).
    CKI = KI/VIC;
  enddef;
  // INPUT CONNECTIONS
  def map between intracellular_K_concentration and extracellular_K_concentration for
    vars KTOT and KTOT;
    vars KE and KE;
  enddef;
  def map between intracellular_K_concentration and intracellular_fluid_volume for
    vars VIC and VIC;
    vars CKI and CKI;
  enddef;
  // ========================================	INTRACELLULAR FLUID VOLUME	=============================================

  // value: EL14 and EL15: Calculation of the rate of change of volume inside all the cells of the body (VID) caused in Block EL14 by differences in osmotic effect of sodium concentration (CNA) outside the cells and potassium concentration (CKI) inside the cells. The rate of transfer of this fluid (VID) is determined by a proportionality factor (VIDML). EL16: Calculation of the changing level of intracellular fluid volume in the entire body (VIC) by integrating the rate of change of this fluid volume (VID).
  def comp intracellular_fluid_volume as
    // Inputs from other components
    var CNA: monovalent_mEq_per_litre {priv: none, pub: in};
    var CKI: monovalent_mEq_per_litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VIC: litre {init: 25.0404, priv: none, pub: out};
    var VID: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var VIDML: litre2_per_monovalent_mEq_per_minute {priv: none, pub: in};
    // Internal variables
    var CCD: monovalent_mEq_per_litre {priv: none, pub: none};
    // value: EL14 and EL15: Calculation of the rate of change of volume inside all the cells of the body (VID) caused in Block EL14 by differences in osmotic effect of sodium concentration (CNA) outside the cells and potassium concentration (CKI) inside the cells. The rate of transfer of this fluid (VID) is determined by a proportionality factor (VIDML).
    CCD = CKI-CNA;
    // value: EL14 and EL15: Calculation of the rate of change of volume inside all the cells of the body (VID) caused in Block EL14 by differences in osmotic effect of sodium concentration (CNA) outside the cells and potassium concentration (CKI) inside the cells. The rate of transfer of this fluid (VID) is determined by a proportionality factor (VIDML).
    VID = CCD*VIDML;
    // value: EL16: Calculation of the changing level of intracellular fluid volume in the entire body (VIC) by integrating the rate of change of this fluid volume (VID).
    ode(VIC, time) = VID;
  enddef;
  // INPUT CONNECTIONS
  def map between intracellular_fluid_volume and extracellular_Na_concentration for
    vars CNA and CNA;
  enddef;
  def map between intracellular_fluid_volume and electrolytes for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between intracellular_fluid_volume and electrolytes_parameter_values for
    vars VIDML and VIDML;
  enddef;
  // ========================================	TOTAL BODY WATER	=============================================

  // value: EL17: The rate of change of total volume of water in the body (DVTW) is equal to the rate of intake of water (TVD) minus the rate of output of water in the urine (VUD). EL18: The total volume of water in the body at any given instant (VTW) is determined by integrating with respect times the rate of change of total water volume (DVTW).
  def comp total_body_water as
    // Inputs from other components
    var TVD: L_per_minute {priv: none, pub: in};
    var VUD: L_per_minute {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VTW: litre {init: 39.8952, priv: none, pub: out};
    // value: EL17: The rate of change of total volume of water in the body (DVTW) is equal to the rate of intake of water (TVD) minus the rate of output of water in the urine (VUD). EL18: The total volume of water in the body at any given instant (VTW) is determined by integrating with respect times the rate of change of total water volume (DVTW).
    ode(VTW, time) = TVD-VUD;
  enddef;
  // INPUT CONNECTIONS
  def map between total_body_water and electrolytes for
    vars VTW and VTW;
    vars TVD and TVD;
    vars VUD and VUD;
    vars time and time;
  enddef;
  // ========================================	EXTRACELLULAR FLUID VOLUME	=============================================

  // value: EL19: The extracellular fluid volume (VEC) is equal to the total volume of water in the body (VTW) minus the total volume of water inside all of the cells of the body (VIC).
  def comp extracellular_fluid_volume as
    // Inputs from other components
    var VIC: litre {priv: none, pub: in};
    var VTW: litre {priv: none, pub: in};
    // Outputs to other components
    var VEC: litre {priv: none, pub: out};
    // value: EL19: The extracellular fluid volume (VEC) is equal to the total volume of water in the body (VTW) minus the total volume of water inside all of the cells of the body (VIC).
    VEC = VTW-VIC;
  enddef;
  // INPUT CONNECTIONS
  def map between extracellular_fluid_volume and intracellular_fluid_volume for
    vars VIC and VIC;
  enddef;
  def map between extracellular_fluid_volume and total_body_water for
    vars VTW and VTW;
  enddef;
  // ============================================================		ELECTROLYTES PARAMETER VALUES		===============================================================

  def comp electrolytes_parameter_values as
    var TRPL: L_per_minute {init: 0, priv: none, pub: out};
    // transfusion coefficient [P]
    var NID: monovalent_mEq_per_minute {init: 0.1, priv: none, pub: out};
    // rate of sodium intake
    var ALCLK: dimensionless {init: 0.3, priv: none, pub: out};
    // sensitivity controller of AMK1 [P]
    var KID: monovalent_mEq_per_minute {init: 0.08, priv: none, pub: out};
    // rate of potassium intake
    var VIDML: litre2_per_monovalent_mEq_per_minute {init: 0.01, priv: none, pub: out};
    // proportionality constant, CCD to VID [P]
  enddef;
  // ============================================================================================================================================================
  // ========================================================	HEART HYPERTROPHY OR DETERIORATION MODEL	===========================================================

  // value: Effect of heart hypertrophy or heart deterioration on heart pumping capability. Encapsulation grouping component containing all the components in the Heart Hypertrophy or Deterioration Model. The inputs and outputs of the Model must be passed by this component.
  def comp heart_hypertrophy_or_deterioration as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var QAO: L_per_minute {priv: out, pub: in};
    var PA: mmHg {priv: out, pub: in};
    var POT: mmHg {priv: out, pub: in};
    var PPA: mmHg {priv: out, pub: in};
    // Outputs to components in other models
    var HPL: dimensionless {priv: in, pub: out};
    var HPR: dimensionless {priv: in, pub: out};
    var HMD: dimensionless {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  // <connection>
  // 	<map_components component_1="heart_hypertrophy_or_deterioration" component_2="left_ventricular_hypertrophy"/>
  // 	<map_variables variable_1="HPL" variable_2="HPL"/>
  // </connection>
  // <connection>
  // 	<map_components component_1="heart_hypertrophy_or_deterioration" component_2="right_ventricular_hypertrophy"/>
  // 	<map_variables variable_1="HPR" variable_2="HPR"/>
  // </connection>
  // <connection>
  // 	<map_components component_1="heart_hypertrophy_or_deterioration" component_2="heart_deterioration"/>
  // 	<map_variables variable_1="HMD" variable_2="HMD"/>
  // </connection>
  // ========================================	DEGREE OF LEFT VENTRICULAR HYPERTROPHY	=============================================

  // value: HH1A, HH1, and HH2: Calculation of a quantitative value (output of Block HH2) which is a multiplier that is approached asymptotically in response to three factors that cause left ventricular hypertrophy, (1) the arterial pressure (PA), (2) the cardiac output (QAO), and (3) the basic strength of the heart (HSL). The degree of hypertrophy in response to the input factors is controlled by the exponent (Z13) in Block HH2. HH3, HH4, and HH5: Calculation of the actual degree of hypertrophy of the left ventricle (HPL) that results over a period of time in response to arterial pressure (PA), cardiac output (QAO), and basic left ventricular strength (HSL). The value HPL approaches the output value from Block HH2 asymptotically with a time constant equal to the input variable at the side of Block HH4.
  def comp left_ventricular_hypertrophy as
    // Inputs from other components
    var QAO: L_per_minute {priv: none, pub: in};
    var PA: mmHg {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var HPL: dimensionless {init: 1.00163, priv: none, pub: out};
    // Parameters from parameter_file
    var HSL: dimensionless {priv: none, pub: in};
    var Z13: dimensionless {priv: none, pub: in};
    // value: HH1A, HH1, and HH2: Calculation of a quantitative value (output of Block HH2) which is a multiplier that is approached asymptotically in response to three factors that cause left ventricular hypertrophy, (1) the arterial pressure (PA), (2) the cardiac output (QAO), and (3) the basic strength of the heart (HSL). The degree of hypertrophy in response to the input factors is controlled by the exponent (Z13) in Block HH2. HH3, HH4, and HH5: Calculation of the actual degree of hypertrophy of the left ventricle (HPL) that results over a period of time in response to arterial pressure (PA), cardiac output (QAO), and basic left ventricular strength (HSL). The value HPL approaches the output value from Block HH2 asymptotically with a time constant equal to the input variable at the side of Block HH4.
    ode(HPL, time) = (pow(PA*QAO/(500{mmHg_L_per_minute}*HSL), Z13)-HPL)/57600{minute};
  enddef;
  // INPUT CONNECTIONS
  def map between left_ventricular_hypertrophy and heart_hypertrophy_or_deterioration for
    vars HPL and HPL;
    vars QAO and QAO;
    vars PA and PA;
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between left_ventricular_hypertrophy and heart_hypertrophy_or_deterioration_parameter_values for
    vars HSL and HSL;
    vars Z13 and Z13;
  enddef;
  // ========================================	DEGREE OF RIGHT VENTRICULAR HYPERTROPHY	=============================================

  // value: HH6A, HH6, HH7, HH8, HH9, and HH10: Calculation of the degree of hypertrophy of the right ventricle (HPR) according to the same scheme as noted above for left ventricular hypertrophy, but with different inputs: pulmonary arterial pressure (PPA), cardiac output (QAO), and basic normal strength of the right heart (HSR).
  def comp right_ventricular_hypertrophy as
    // Inputs from other components
    var QAO: L_per_minute {priv: none, pub: in};
    var PPA: mmHg {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var HPR: dimensionless {init: 1.00237, priv: none, pub: out};
    // Parameters from parameter_file
    var HSR: dimensionless {priv: none, pub: in};
    var Z13: dimensionless {priv: none, pub: in};
    // value: HH6A, HH6, HH7, HH8, HH9, and HH10: Calculation of the degree of hypertrophy of the right ventricle (HPR) according to the same scheme as noted above for left ventricular hypertrophy, but with different inputs: pulmonary arterial pressure (PPA), cardiac output (QAO), and basic normal strength of the right heart (HSR).
    ode(HPR, time) = (pow(PPA*QAO/(75{mmHg_L_per_minute}*HSR), Z13)-HPR)/57600{minute};
  enddef;
  // INPUT CONNECTIONS
  def map between right_ventricular_hypertrophy and heart_hypertrophy_or_deterioration for
    vars HPR and HPR;
    vars QAO and QAO;
    vars PPA and PPA;
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between right_ventricular_hypertrophy and heart_hypertrophy_or_deterioration_parameter_values for
    vars HSR and HSR;
    vars Z13 and Z13;
  enddef;
  // ========================================	HEART DETERIORATION	=============================================

  // value: HH11, HH12, HH13, and HH14: Calculation of a multiplier factor that decreases cardiac pumping effectiveness (HMD) when the cellular P02 of the heart muscle cells (POT) falls too low. The sensitivity control is DHDTR, and the effect is limited by Block HH14 so that no change in HMD occurs until the cell PO2 falls below the input value to the side of Block HH11.
  def comp heart_deterioration as
    // Inputs from other components
    var POT: mmHg {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var HMD: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var DHDTR: per_mmHg_per_minute {priv: none, pub: in};
    // Internal variables
    var HMD1: dimensionless {init: 1.0, priv: none, pub: none};
    var DHM: per_minute {priv: none, pub: none};
    // value: HH11, HH12, HH13, and HH14: Calculation of a multiplier factor that decreases cardiac pumping effectiveness (HMD) when the cellular P02 of the heart muscle cells (POT) falls too low. The sensitivity control is DHDTR, and the effect is limited by Block HH14 so that no change in HMD occurs until the cell PO2 falls below the input value to the side of Block HH11.
    DHM = (POT-10{mmHg})*DHDTR;
    // value: HH11, HH12, HH13, and HH14: Calculation of a multiplier factor that decreases cardiac pumping effectiveness (HMD) when the cellular P02 of the heart muscle cells (POT) falls too low. The sensitivity control is DHDTR, and the effect is limited by Block HH14 so that no change in HMD occurs until the cell PO2 falls below the input value to the side of Block HH11.
    ode(HMD1, time) = DHM;
    // value: HH11, HH12, HH13, and HH14: Calculation of a multiplier factor that decreases cardiac pumping effectiveness (HMD) when the cellular P02 of the heart muscle cells (POT) falls too low. The sensitivity control is DHDTR, and the effect is limited by Block HH14 so that no change in HMD occurs until the cell PO2 falls below the input value to the side of Block HH11.
    HMD = sel
      case HMD1 > 1{dimensionless}:
        1{dimensionless};
      otherwise:
        HMD1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between heart_deterioration and heart_hypertrophy_or_deterioration for
    vars HMD and HMD;
    vars POT and POT;
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between heart_deterioration and heart_hypertrophy_or_deterioration_parameter_values for
    vars DHDTR and DHDTR;
  enddef;
  // ==================================	HEART HYPERTROPHY OR DETERIORATION PARAMETER VALUES	=======================================

  def comp heart_hypertrophy_or_deterioration_parameter_values as
    var HSL: dimensionless {init: 1, priv: none, pub: out};
    // basic strength of left ventricle
    var Z13: dimensionless {init: 0.625, priv: none, pub: out};
    // exponent controlling degree of heart hypertrophy [P]
    var HSR: dimensionless {init: 1, priv: none, pub: out};
    // basic strength of right ventricle
    var DHDTR: per_mmHg_per_minute {init: 0.05, priv: none, pub: out};
    // proportionality constant, cardiac deterioration [P]
  enddef;
  // ============================================================================================================================================================
  // ========================================	HEART RATE AND STROKE VOLUME MODEL	================================================

  // value: The heart rate (HR) and stroke volume output (SVO) are controlled by autonomic stimulation (AUR), by a direct effect of right atrial pressure (PRA) on the sinus rhythm of the heart, and by an effect of any degree of deterioration of the heart (HMD) on heart rate control. Encapsulation grouping component containing all the components in the Heart Rate and Stroke Volume Model. The inputs and outputs of the Heart Rate and Stroke Volume Model must be passed by this component.
  def comp heart_rate_and_stroke_volume as
    // Inputs from components in other models
    var QLO: L_per_minute {priv: out, pub: in};
    var AUR: dimensionless {priv: out, pub: in};
    var PRA: mmHg {priv: out, pub: in};
    var HMD: dimensionless {priv: out, pub: in};
  enddef;
  // HEART RATE AND STROKE VOLUME INPUT CONNECTIONS
  def map between heart_rate_and_stroke_volume and circulatory_dynamics for
    vars QLO and QLO;
    vars PRA and PRA;
  enddef;
  def map between heart_rate_and_stroke_volume and autonomics for
    vars AUR and AUR;
  enddef;
  def map between heart_rate_and_stroke_volume and heart_hypertrophy_or_deterioration for
    vars HMD and HMD;
  enddef;
  // ========================================	EFFECT OF AUTONOMIC STIMULATION ON HEART RATE	=============================================

  // value: HR1: Calculation of the portion of the heart rate that is controlled by autonomic stimulation. Autonomic input is the variable (AUR).
  def comp effect_of_autonomic_stimulation_on_HR as
    // Inputs from other components
    var AUR: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AUHR: beats_per_minute {priv: none, pub: out};
    // value: HR1: Calculation of the portion of the heart rate that is controlled by autonomic stimulation. Autonomic input is the variable (AUR).
    AUHR = 72{beats_per_minute}*AUR;
  enddef;
  // INPUT CONNECTIONS
  def map between effect_of_autonomic_stimulation_on_HR and heart_rate_and_stroke_volume for
    vars AUR and AUR;
  enddef;
  // ========================================	EFFECT OF PRESSURE (PRA) ON HEART RATE	=============================================
  // ========================================	CHECK THIS! - NO EQUATION HR1B!!! INPUT PR1LL NOT PRA or PR1!!!	=============================================

  // value: HR1A, HR1B, and HR2: Calculation of the portion of the heart rate that is controlled by direct effect of changes in right atrial pressure (PRA) on the sinus nodal rhythm. Block HR1B limits the effect to positive atrial pressure (PRA) values.
  def comp effect_of_PRA_on_HR as
    // Inputs from other components
    // <variable name=""	units="dimensionless" private_interface="none" public_interface="in"/>
    // Outputs to other components
    var PRHR: beats_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var PR1LL: mmHg {priv: none, pub: in};
    // value: HR1A, HR1B, and HR2: Calculation of the portion of the heart rate that is controlled by direct effect of changes in right atrial pressure (PRA) on the sinus nodal rhythm. Block HR1B limits the effect to positive atrial pressure (PRA) values.
    PRHR = pow(PR1LL, 0.5{dimensionless})*5{beats_per_minute_per_mmHg};
  enddef;
  // INPUT CONNECTIONS
  // <connection>
  // 	<map_components component_1="effect_of_PRA_on_HR" component_2=""/>
  // 	<map_variables variable_1="" variable_2=""/>
  // </connection>
  // PARAMETER CONNECTIONS
  def map between effect_of_PRA_on_HR and HR_and_SV_parameter_values for
    vars PR1LL and PR1LL;
  enddef;
  // ========================================	EFFECT OF HEART DETERIORATION ON HEART RATE	=============================================

  // value: HR4, HR5, and HR6: Sensitivity control for the effect of any deterioration of heart function (HMD) on heart rate. The sensitivity factor is the side input to Block HR5.
  def comp effect_of_heart_deterioration_on_HR as
    // Inputs from other components
    var HMD: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var HDHR: dimensionless {priv: none, pub: out};
    // value: HR4, HR5, and HR6: Sensitivity control for the effect of any deterioration of heart function (HMD) on heart rate. The sensitivity factor is the side input to Block HR5.
    HDHR = (HMD-1{dimensionless})*0.5{dimensionless}+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between effect_of_heart_deterioration_on_HR and heart_rate_and_stroke_volume for
    vars HMD and HMD;
  enddef;
  // ========================================	HEART RATE	=============================================

  // value: HR3: Calculation of a temporary value for heart rate based on the control effects of autonomic stimulation and right atrial pressure. HR7: Calculation of heart rate (HR) by multiplying the heart deterioration multiplier effect (output from Block HR6) times the temporary basic heart rate calculated from Block HR3.
  def comp heart_rate as
    // Inputs from other components
    var AUHR: beats_per_minute {priv: none, pub: in};
    var PRHR: beats_per_minute {priv: none, pub: in};
    var HDHR: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var HR: beats_per_minute {priv: none, pub: out};
    // value: HR3: Calculation of a temporary value for heart rate based on the control effects of autonomic stimulation and right atrial pressure. HR7: Calculation of heart rate (HR) by multiplying the heart deterioration multiplier effect (output from Block HR6) times the temporary basic heart rate calculated from Block HR3.
    HR = (AUHR+PRHR)*HDHR;
  enddef;
  // INPUT CONNECTIONS
  def map between heart_rate and effect_of_autonomic_stimulation_on_HR for
    vars AUHR and AUHR;
  enddef;
  def map between heart_rate and effect_of_PRA_on_HR for
    vars PRHR and PRHR;
  enddef;
  def map between heart_rate and effect_of_heart_deterioration_on_HR for
    vars HDHR and HDHR;
  enddef;
  // ========================================	STROKE VOLUME OUTPUT	=============================================

  // value: HR8: Calculation of stroke volume output (SVO) by dividing minute left ventricular output (QLO) by heart rate (HR).
  def comp stroke_volume_output as
    // Inputs from other components
    var QLO: L_per_minute {priv: none, pub: in};
    var HR: beats_per_minute {priv: none, pub: in};
    // Outputs to other components
    var SVO: litre {priv: none, pub: out};
    // value: HR8: Calculation of stroke volume output (SVO) by dividing minute left ventricular output (QLO) by heart rate (HR).
    SVO = QLO/HR;
  enddef;
  // INPUT CONNECTIONS
  def map between stroke_volume_output and heart_rate_and_stroke_volume for
    vars QLO and QLO;
  enddef;
  def map between stroke_volume_output and heart_rate for
    vars HR and HR;
  enddef;
  // ==========================================================	HR AND SV PARAMETER VALUES	================================================================

  def comp HR_and_SV_parameter_values as
    var PR1LL: mmHg {init: 0, priv: none, pub: out};
    // PR1 lower limit [P]
  enddef;
  // ============================================================================================================================================================
  // =============================================	MUSCLE AUTOREGULATORY LOCAL BLOOD FLOW CONTROL MODEL		============================

  // value: The circulatory system is divided into three separate parts for blood flow control: (1) the kidneys which are presented in an entirely separate section of this model; (2) non-muscle local blood flow control; and (3) muscle local blood flow control. Muscle Autoregulatory Local Blood Flow Control Autoregulation in the muscles is similar to that in the non-muscle tissues except that only two parallel autoregulatory circuits are given. One of these is an extremely short-term autoregulatory circuit that allows rapid adjustment of muscle blood flow to muscle metabolism during muscle activity, and the other is a very long-term autoregulatory circuit. Encapsulation grouping component containing all the components in the Muscle Autoregulatory Local Blood Flow Control Model. The inputs and outputs of the Muscle Autoregulatory Local Blood Flow Control Model must be passed by this component.
  def comp muscle_autoregulatory_local_blood_flow_control as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var PMO: mmHg {priv: out, pub: in};
    // Outputs to components in other models
    var AMM: dimensionless {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  def map between muscle_autoregulatory_local_blood_flow_control and global_M_blood_flow_autoregulation_output for
    vars AMM and AMM;
  enddef;
  // ========================================	MUSCLE AUTOREGULATORY DRIVING FORCE	=============================================

  // value: ARM1: Calculation of the driving force for autoregulation in the muscles (PDO) by subtracting a set-point value from the pressure of oxygen in the muscle tissues (PMO).
  def comp M_autoregulatory_driving_force as
    // Inputs from other components
    var PMO: mmHg {priv: none, pub: in};
    // Outputs to other components
    var PDO: mmHg {priv: none, pub: out};
    // value: ARM1: Calculation of the driving force for autoregulation in the muscles (PDO) by subtracting a set-point value from the pressure of oxygen in the muscle tissues (PMO).
    PDO = PMO-38{mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between M_autoregulatory_driving_force and muscle_autoregulatory_local_blood_flow_control for
    vars PMO and PMO;
  enddef;
  // ========================================	MUSCLE SHORT-TERM AUTOREGULATION		=============================================

  // value: Containment grouping component for "M_ST_sensitivity_control" and "M_ST_time_delay_and_damping".
  def comp M_short_term_autoregulation as
  enddef;
  // ========================================	MUSCLE SHORT_TERM SENSITIVITY CONTROL	=============================================

  // value: ARM2 and ARM3: Sensitivity control for the short-term muscle autoregulation, controlled by the variable (POM), and the driving output oxygen pressure is the variable POE.
  def comp M_ST_sensitivity_control as
    // Inputs from other components
    var PDO: mmHg {priv: none, pub: in};
    // Outputs to other components
    var POE: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var POM: dimensionless {priv: none, pub: in};
    // value: ARM2 and ARM3: Sensitivity control for the short-term muscle autoregulation, controlled by the variable (POM), and the driving output oxygen pressure is the variable POE.
    POE = PDO*POM+1{mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between M_ST_sensitivity_control and M_autoregulatory_driving_force for
    vars PDO and PDO;
  enddef;
  // PARAMETER CONNECTIONS
  def map between M_ST_sensitivity_control and M_autoregulatory_local_blood_flow_parameter_values for
    vars POM and POM;
  enddef;
  // ========================================	MUSCLE SHORT-TERM TIME-DELAY AND LOWER LIMIT	=============================================

  // value: ARM5, ARM6, and ARM7: Time delay mechanism for the rapid autoregulation, allowing the output of Block ARM7 (AMM1) to approach POE with a time constant of A4K. ARM7A: This sets a lower limit (AMM4) for the variable AMM1.
  def comp M_ST_time_delay_and_limit as
    // Inputs from other components
    var POE: mmHg {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var AMM1: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var A4K: minute {priv: none, pub: in};
    var AMM4: dimensionless {priv: none, pub: in};
    var AMM1T: dimensionless {init: 1.00269, priv: none, pub: none};
    // value: ARM5, ARM6, and ARM7: Time delay mechanism for the rapid autoregulation, allowing the output of Block ARM7 (AMM1) to approach POE with a time constant of A4K.
    ode(AMM1T, time) = (POE*1{per_mmHg}-AMM1T)/A4K;
    // value: ARM7A: This sets a lower limit (AMM4) for the variable AMM1.
    AMM1 = sel
      case AMM1T < AMM4:
        AMM4;
      otherwise:
        AMM1T;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between M_ST_time_delay_and_limit and M_ST_sensitivity_control for
    vars POE and POE;
  enddef;
  def map between M_ST_time_delay_and_limit and muscle_autoregulatory_local_blood_flow_control for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between M_ST_time_delay_and_limit and M_autoregulatory_local_blood_flow_parameter_values for
    vars A4K and A4K;
    vars AMM4 and AMM4;
  enddef;
  // ========================================	MUSCLE LONG-TERM AUTOREGULATION	=============================================

  // value: Containment grouping component for "M_LT_sensitivity_control" and "M_LT_time_delay".
  def comp M_long_term_autoregulation as
  enddef;
  // ========================================	MUSCLE LONG-TERM SENSITIVITY CONTROL	=============================================

  // value: ARM8: Sensitivity control for controlling the long-term autoregulation in the muscles. The variable that controls the sensitivity is POM2.
  def comp M_LT_sensitivity_control as
    // Inputs from other components
    var PDO: mmHg {priv: none, pub: in};
    // Outputs to other components
    var POF: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var POM2: dimensionless {priv: none, pub: in};
    // value: ARM8: Sensitivity control for controlling the long-term autoregulation in the muscles. The variable that controls the sensitivity is POM2.
    POF = POM2*PDO+1{mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between M_LT_sensitivity_control and M_autoregulatory_driving_force for
    vars PDO and PDO;
  enddef;
  // PARAMETER CONNECTIONS
  def map between M_LT_sensitivity_control and M_autoregulatory_local_blood_flow_parameter_values for
    vars POM2 and POM2;
  enddef;
  // ========================================	MUSCLE LONG-TERM TIME DELAY	=============================================

  // value: ARM9, ARM10, and ARM11: Time delay system for long-term autoregulation in muscle with a time constant equal to A4K2 and an output of AMM2.
  def comp M_LT_time_delay as
    // Inputs from other components
    var POF: mmHg {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var AMM2: dimensionless {init: 1.09071, priv: none, pub: out};
    // Parameters from parameter_file
    var A4K2: minute {priv: none, pub: in};
    // value: ARM9, ARM10, and ARM11: Time delay system for long-term autoregulation in muscle with a time constant equal to A4K2 and an output of AMM2.
    ode(AMM2, time) = (POF*1{per_mmHg}-AMM2)/A4K2;
  enddef;
  // INPUT CONNECTIONS
  def map between M_LT_time_delay and M_LT_sensitivity_control for
    vars POF and POF;
  enddef;
  def map between M_LT_time_delay and muscle_autoregulatory_local_blood_flow_control for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between M_LT_time_delay and M_autoregulatory_local_blood_flow_parameter_values for
    vars A4K2 and A4K2;
  enddef;
  // ========================================	GLOBAL MUSCLE BLOOD FLOW AUTOREGULATION OUTPUT	=============================================

  // value: ARM12: Multiplication of the outputs of the two parallel muscle autoregulatory systems (AMM1 and AMM2) to given an overall multiplier factor for muscle autoregulation (AMM) that in turn controls vascular resistance in the muscles.
  def comp global_M_blood_flow_autoregulation_output as
    // Inputs from other components
    var AMM1: dimensionless {priv: none, pub: in};
    var AMM2: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AMM: dimensionless {priv: none, pub: out};
    // value: ARM12: Multiplication of the outputs of the two parallel muscle autoregulatory systems (AMM1 and AMM2) to given an overall multiplier factor for muscle autoregulation (AMM) that in turn controls vascular resistance in the muscles.
    AMM = AMM1*AMM2;
  enddef;
  // INPUT CONNECTIONS
  def map between global_M_blood_flow_autoregulation_output and M_ST_time_delay_and_limit for
    vars AMM1 and AMM1;
  enddef;
  def map between global_M_blood_flow_autoregulation_output and M_LT_time_delay for
    vars AMM2 and AMM2;
  enddef;
  // ==========================	MUSCLE AUTOREGULATORY LOCAL BLOOD FLOW CONTROL PARAMETER VALUES	=====================================

  def comp M_autoregulatory_local_blood_flow_parameter_values as
    var POM: dimensionless {init: 0.04, priv: none, pub: out};
    // sensitivity control, rapid muscle autoregulation [P]
    var A4K: minute {init: 0.1, priv: none, pub: out};
    // time constant, rapid muscle autoregulation [P]
    var AMM4: dimensionless {init: 0.005, priv: none, pub: out};
    // AMM1 lower limit [P]
    var POM2: dimensionless {init: 2, priv: none, pub: out};
    // sensitivity control, long-term muscle autoregulation [P]
    var A4K2: minute {init: 40000, priv: none, pub: out};
    // time constant, long-term muscle autoregulation [P]
  enddef;
  // ============================================================================================================================================================
  // ========================================================	MUSCLE O2 DELIVERY MODEL	===========================================================

  // value: The tissues of the body are divided into non-muscle tissues and muscle tissues, and the delivery of oxygen to each one of these is calculated separately. The principal reason for this separation is that during muscle activity, the delivery of oxygen to the muscles increases tremendously and correspondingly affects the blood flow through the muscles. Several aspects of local cellular usage of oxygen are also calculated. Encapsulation grouping component containing all the components in the Muscle Oxygen Delivery Model. The inputs and outputs of the Muscle Oxygen Delivery Model must be passed by this component.
  def comp muscle_O2_delivery as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var BFM: L_per_minute {priv: out, pub: in};
    var OVA: mL_per_L {priv: out, pub: in};
    var HM: dimensionless {priv: out, pub: in};
    var AOM: dimensionless {priv: out, pub: in};
    // Outputs to components in other models
    var PMO: mmHg {priv: in, pub: out};
    var RMO: mL_per_minute {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  def map between muscle_O2_delivery and pressure_of_O2_in_M_tissue_cells for
    vars PMO and PMO;
  enddef;
  // <connection>
  // 	<map_components component_1="muscle_O2_delivery" component_2="delivery_of_O2_to_M_tissues"/>
  // 	<map_variables variable_1="RMO" variable_2="RMO"/>
  // </connection>
  // ====================================================	MUSCLE O2 BLOOD SUPPLY	=========================================================

  // value: OM1: The volume of oxygen in the arterial blood flowing to the muscles each minute (02ARTM) is equal to the volume of oxygen in each liter of arterial blood (OVA) times the muscle blood flow (BFM).
  def comp M_O2_blood_supply as
    // Inputs from other components
    var OVA: mL_per_L {priv: none, pub: in};
    var BFM: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var O2ARTM: mL_per_minute {priv: none, pub: out};
    // value: OM1: The volume of oxygen in the arterial blood flowing to the muscles each minute (02ARTM) is equal to the volume of oxygen in each liter of arterial blood (OVA) times the muscle blood flow (BFM).
    O2ARTM = OVA*BFM;
  enddef;
  // INPUT CONNECTIONS
  def map between M_O2_blood_supply and muscle_O2_delivery for
    vars OVA and OVA;
    vars BFM and BFM;
  enddef;
  // ========================================	MUSCLE VENOUS O2 CONTENT	=============================================

  // value: OM2: The volume of oxygen in the venous blood flowing away from the muscles each minute (O2VENM) is equal to the volume of blood flowing into the muscles from the arteries (O2ARTM) minus the rate of uptake of oxygen by the muscles per minute (RMO). OM3 and OM4: The venous oxygen saturation in the muscles (OVS) is equal to the volume of oxygen transported to the muscle veins each minute (O2VENM) divided by the blood flow through the muscles per minute (BFM), divided by the hematocrit of the blood (HM), and divided by a constant that relates volume of oxygen in the blood to hematocrit. Damping of the oxygen venous saturation (OVS) is provided by Block OM4 and is controlled by the damping constant (Z6). OM5 and OM5A: The pressure of the oxygen in the venous blood of the muscles (PVO) is equal to the saturation of the oxygen in the venous blood of the muscles (OVS) times a constant and times a factor related exponentially (EXCXP2) to the level of exercise (EXC) caused by changes in tissue fluid products that affect oxygen combination with hemoglobin.
  def comp M_venous_O2_content as
    // Inputs from other components
    var O2ARTM: mL_per_minute {priv: none, pub: in};
    var RMO: mL_per_minute {priv: none, pub: in};
    var BFM: L_per_minute {priv: none, pub: in};
    var HM: dimensionless {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var PVO: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var EXC: dimensionless {priv: none, pub: in};
    var EXCXP2: dimensionless {priv: none, pub: in};
    // Internal variables
    var OVS: dimensionless {priv: none, pub: none};
    // value: OM2: The volume of oxygen in the venous blood flowing away from the muscles each minute (O2VENM) is equal to the volume of blood flowing into the muscles from the arteries (O2ARTM) minus the rate of uptake of oxygen by the muscles per minute (RMO). OM3 and OM4: The venous oxygen saturation in the muscles (OVS) is equal to the volume of oxygen transported to the muscle veins each minute (O2VENM) divided by the blood flow through the muscles per minute (BFM), divided by the hematocrit of the blood (HM), and divided by a constant that relates volume of oxygen in the blood to hematocrit. Damping of the oxygen venous saturation (OVS) is provided by Block OM4 and is controlled by the damping constant (Z6).
    OVS = (O2ARTM-RMO)/(HM*5.25{dimensionless}*BFM);
    // value: OM5 and OM5A: The pressure of the oxygen in the venous blood of the muscles (PVO) is equal to the saturation of the oxygen in the venous blood of the muscles (OVS) times a constant and times a factor related exponentially (EXCXP2) to the level of exercise (EXC) caused by changes in tissue fluid products that affect oxygen combination with hemoglobin.
    PVO = 57.14{mmHg}*OVS*pow(EXC, EXCXP2);
  enddef;
  // INPUT CONNECTIONS
  def map between M_venous_O2_content and M_O2_blood_supply for
    vars O2ARTM and O2ARTM;
  enddef;
  def map between M_venous_O2_content and delivery_of_O2_to_M_tissues for
    vars RMO and RMO;
    vars PVO and PVO;
  enddef;
  def map between M_venous_O2_content and muscle_O2_delivery for
    vars BFM and BFM;
    vars HM and HM;
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between M_venous_O2_content and M_O2_delivery_parameter_values for
    vars EXC and EXC;
    vars EXCXP2 and EXCXP2;
  enddef;
  // ========================================	AUTONOMIC EFFECT ON MUSCLE O2 CONSUMPTION	=============================================
  //  THIS COMPONENT IS THE SAME AS THE AUTONOMICS EQUATIONS NUMBERS 47 AND 48!!!
  // 	<component 	name="autonomic_effect_on_M_O2_consumption"
  // 				cmeta:id="autonomic_effect_on_M_O2_consumption">
  // 		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  // 			<rdf:Description rdf:about="#autonomic_effect_on_M_O2_consumption">
  // 				<rdf:value>
  // 				OM24 and OM25:
  // 				Calculation of autonomic stimulation of muscle usage of oxygen (AOM) based
  // 				on the current level of whole-body autonomic stimulation (AUO) times a
  // 				proportionality factor (O2A).
  // 				</rdf:value>
  // 			</rdf:Description>
  // 		</rdf:RDF>
  // 	</component>
  // ========================================	METABOLIC O2 CONSUMPTION BY MUSCLE TISSUE CELLS	=============================================

  // value: OM17, OM18, OM19, OM20, OM21, OM22, and OM23: Calculation of the rate of metabolic usage of oxygen by the muscle cells (MMO) from several factors: the oxygen pressure in the muscle cells (PMO), the basal level of oxygen utilization by the muscle cells (OMM), the effect of autonomic stimulation on muscle usage of oxygen (AOM), and the effect of exercise on the metabolic usage of oxygen by the muscles (EXC). Blocks OM17 and OM18 cause the metabolic usage of oxygen to reach a maximum at any time that the average muscle cellular oxygen level is above the value of 38 mmHg pressure. The constants in the various blocks are curve-shaping constants to relate cellular oxygen pressure (PMO) to the metabolic usage of oxygen.
  def comp metabolic_O2_consumption_by_M_tissue as
    // Inputs from other components
    var PMO: mmHg {priv: none, pub: in};
    var AOM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var MMO: mL_per_minute {priv: none, pub: out};
    var P2O: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var OMM: mL_per_minute {priv: none, pub: in};
    var EXC: dimensionless {priv: none, pub: in};
    // value: OM17, OM18, OM19, OM20, OM21, OM22, and OM23: Calculation of the rate of metabolic usage of oxygen by the muscle cells (MMO) from several factors: the oxygen pressure in the muscle cells (PMO), the basal level of oxygen utilization by the muscle cells (OMM), the effect of autonomic stimulation on muscle usage of oxygen (AOM), and the effect of exercise on the metabolic usage of oxygen by the muscles (EXC). Blocks OM17 and OM18 cause the metabolic usage of oxygen to reach a maximum at any time that the average muscle cellular oxygen level is above the value of 38 mmHg pressure. The constants in the various blocks are curve-shaping constants to relate cellular oxygen pressure (PMO) to the metabolic usage of oxygen.
    P2O = sel
      case PMO > 38{mmHg}:
        38{mmHg};
      otherwise:
        PMO;
    endsel;
    // value: OM17, OM18, OM19, OM20, OM21, OM22, and OM23: Calculation of the rate of metabolic usage of oxygen by the muscle cells (MMO) from several factors: the oxygen pressure in the muscle cells (PMO), the basal level of oxygen utilization by the muscle cells (OMM), the effect of autonomic stimulation on muscle usage of oxygen (AOM), and the effect of exercise on the metabolic usage of oxygen by the muscles (EXC). Blocks OM17 and OM18 cause the metabolic usage of oxygen to reach a maximum at any time that the average muscle cellular oxygen level is above the value of 38 mmHg pressure. The constants in the various blocks are curve-shaping constants to relate cellular oxygen pressure (PMO) to the metabolic usage of oxygen.
    MMO = AOM*OMM*EXC*(1{dimensionless}-pow(38.0001{mmHg}-P2O, 3{dimensionless})/54872{mmHg3});
  enddef;
  // INPUT CONNECTIONS
  def map between metabolic_O2_consumption_by_M_tissue and pressure_of_O2_in_M_tissue_cells for
    vars PMO and PMO;
  enddef;
  def map between metabolic_O2_consumption_by_M_tissue and muscle_O2_delivery for
    vars AOM and AOM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between metabolic_O2_consumption_by_M_tissue and M_O2_delivery_parameter_values for
    vars OMM and OMM;
    vars EXC and EXC;
  enddef;
  // ========================================	DELIVERY OF O2 TO MUSCLE TISSUES	=============================================

  // value: OM6: The pressure gradient for delivery of oxygen from the muscle capillaries to the muscle cells (PGRM) is equal to the pressure of the oxygen remaining in the muscle venous blood (PVO) minus the pressure of the oxygen in the muscle cells (PMO). OM8: Rate of delivery of oxygen to the muscles (RMO) is equal to the blood flow to the muscles (BFM) times the pressure gradient between the muscle capillary blood and the muscle cells (PGRM) times a constant (PM5) that can be varied to represent such factors as changes in muscle capillarity or so forth.
  def comp delivery_of_O2_to_M_tissues as
    // Inputs from other components
    var PMO: mmHg {priv: none, pub: in};
    var PVO: mmHg {priv: none, pub: in};
    var BFM: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var RMO: mL_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var PM5: per_mmHg {priv: none, pub: in};
    // value: OM6: The pressure gradient for delivery of oxygen from the muscle capillaries to the muscle cells (PGRM) is equal to the pressure of the oxygen remaining in the muscle venous blood (PVO) minus the pressure of the oxygen in the muscle cells (PMO). OM8: Rate of delivery of oxygen to the muscles (RMO) is equal to the blood flow to the muscles (BFM) times the pressure gradient between the muscle capillary blood and the muscle cells (PGRM) times a constant (PM5) that can be varied to represent such factors as changes in muscle capillarity or so forth.
    RMO = (PVO-PMO)*PM5*BFM;
  enddef;
  // INPUT CONNECTIONS
  def map between delivery_of_O2_to_M_tissues and pressure_of_O2_in_M_tissue_cells for
    vars PMO and PMO;
  enddef;
  def map between delivery_of_O2_to_M_tissues and muscle_O2_delivery for
    vars BFM and BFM;
    vars RMO and RMO;
  enddef;
  // PARAMETER CONNECTIONS
  def map between delivery_of_O2_to_M_tissues and M_O2_delivery_parameter_values for
    vars PM5 and PM5;
  enddef;
  // ========================================	VOLUME OF O2 IN MUSCLE TISSUE	=============================================

  // value: OM9: The rate of change of stored oxygen in the muscle (DO2M) is equal to the rate of delivery of oxygen to the muscles by the blood (RMO) minus the rate of metabolic usage of oxygen by the muscle cells (MMO). OM10: The instantaneous volume of oxygen dissolved in all of the muscles (QOM) is calculated by integrating with respect to time the rate of change of oxygen in the muscles (DO2M). OM11: This sets a lower limit for QOM in the muscle tissue.
  def comp volume_of_O2_in_M_tissue as
    // Inputs from other components
    var RMO: mL_per_minute {priv: none, pub: in};
    var MMO: mL_per_minute {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var QOM: mL {priv: none, pub: out};
    // Internal variables
    var DO2M: mL_per_minute {priv: none, pub: none};
    var QOM1: mL {init: 48.0839, priv: none, pub: none};
    // value: OM9: The rate of change of stored oxygen in the muscle (DO2M) is equal to the rate of delivery of oxygen to the muscles by the blood (RMO) minus the rate of metabolic usage of oxygen by the muscle cells (MMO).
    DO2M = RMO-MMO;
    // value: OM10: The instantaneous volume of oxygen dissolved in all of the muscles (QOM) is calculated by integrating with respect to time the rate of change of oxygen in the muscles (DO2M).
    ode(QOM1, time) = DO2M;
    // value: OM11: This sets a lower limit for QOM in the muscle tissue.
    QOM = sel
      case QOM1 < 0.0001{mL}:
        0.0001{mL};
      otherwise:
        QOM1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between volume_of_O2_in_M_tissue and delivery_of_O2_to_M_tissues for
    vars RMO and RMO;
  enddef;
  def map between volume_of_O2_in_M_tissue and metabolic_O2_consumption_by_M_tissue for
    vars MMO and MMO;
  enddef;
  def map between volume_of_O2_in_M_tissue and muscle_O2_delivery for
    vars time and time;
  enddef;
  // ========================================	PRESSURE OF O2 IN MUSCLE TISSUE CELLS	=============================================

  // value: OM12: Calculation of the pressure of oxygen in the muscle cells (PMO) from the volume of oxygen in the muscles (QOM).
  def comp pressure_of_O2_in_M_tissue_cells as
    // Inputs from other components
    var QOM: mL {priv: none, pub: in};
    // Outputs to other components
    var PMO: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var PK2: mmHg_per_mL {priv: none, pub: in};
    // value: OM12: Calculation of the pressure of oxygen in the muscle cells (PMO) from the volume of oxygen in the muscles (QOM).
    PMO = PK2*QOM;
  enddef;
  // INPUT CONNECTIONS
  def map between pressure_of_O2_in_M_tissue_cells and volume_of_O2_in_M_tissue for
    vars QOM and QOM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between pressure_of_O2_in_M_tissue_cells and M_O2_delivery_parameter_values for
    vars PK2 and PK2;
  enddef;
  // ==========================================================	MUSCLE O2 DELIVERY PARAMETER VALUES	================================================================

  def comp M_O2_delivery_parameter_values as
    var EXC: dimensionless {init: 1, priv: none, pub: out};
    // level of exercise activity [P]
    var EXCXP2: dimensionless {init: 0.17, priv: none, pub: out};
    // exponent factor of exercise on muscle metabolism [P]
    var OMM: mL_per_minute {init: 57.1, priv: none, pub: out};
    // basic O2 utilization in muscle tissues (at rest) [P]
    var PM5: per_mmHg {init: 30, priv: none, pub: out};
    // constant, to change muscle capillarity [P]
    var PK2: mmHg_per_mL {init: 0.79167, priv: none, pub: out};
    // proportionality constant, muscle tissue PO2 [P]
  enddef;
  // ============================================================================================================================================================
  // ====================================	NON-MUSCLE AUTOREGULATORY LOCAL BLOOD FLOW CONTROL MODEL	==================================

  // value: The circulatory system is divided into three separate parts for blood flow control: (1) the kidneys which are presented in an entirely separate section of this model; (2) non-muscle local blood flow control; and (3) muscle local blood flow control. Non-muscle Autoregulatory Local Blood Flow Control This portion of the circulation has three separate parallel autoregulatory processes, one of which occurs in a matter of minutes, another over a period of tens of minutes, and a third over a period of weeks. All of these are considered to respond to changes in tissue oxygen level. The first two are rapid metabolic feedback effects, one almost instantaneous and the other occurring over a period of tens of minutes to an hour or so. The third is considered to be structural changes that result over a period of weeks and may be a consequence of the vasodilation or vasoconstriction that occurs during the two short-term metabolic stages. Encapsulation grouping component containing all the components in the Non-Muscle Autoregulatory Local Blood Flow Control Model. The inputs and outputs of the Non-Muscle Autoregulatory Local Blood Flow Control Model must be passed by this component.
  def comp non_muscle_autoregulatory_local_blood_flow_control as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var POT: mmHg {priv: out, pub: in};
    // Outputs to components in other models
    var ARM: dimensionless {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  def map between non_muscle_autoregulatory_local_blood_flow_control and global_NM_blood_flow_autoregulation_output for
    vars ARM and ARM;
  enddef;
  // ========================================	AUTOREGULATORY DRIVING FORCE	=============================================

  // value: ARN1: The driving force that causes an autoregulatory response in non-muscle tissues (POD) is equal to the pressure of the oxygen in tissues (POT) minus the set-point for the autoregulatory response (POR).
  def comp NM_autoregulatory_driving_force as
    // Inputs from other components
    var POT: mmHg {priv: none, pub: in};
    // Outputs to other components
    var POD: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var POR: mmHg {priv: none, pub: in};
    // value: ARN1: The driving force that causes an autoregulatory response in non-muscle tissues (POD) is equal to the pressure of the oxygen in tissues (POT) minus the set-point for the autoregulatory response (POR).
    POD = POT-POR;
  enddef;
  // INPUT CONNECTIONS
  def map between NM_autoregulatory_driving_force and non_muscle_autoregulatory_local_blood_flow_control for
    vars POT and POT;
  enddef;
  // PARAMETER CONNECTIONS
  def map between NM_autoregulatory_driving_force and NM_autoregulatory_local_blood_flow_parameter_values for
    vars POR and POR;
  enddef;
  // ========================================	NON-MUSCLE SHORT-TERM AUTOREGULATION		=============================================

  // value: Containment grouping component for "ST_sensitivity_control" and "ST_time_delay_and_damping".
  def comp NM_short_term_autoregulation as
  enddef;
  // ========================================	NON-MUSCLE SHORT_TERM SENSITIVITY CONTROL	=============================================

  // value: ARN2 and ARN3: Sensitivity control for short-term autoregulation, with the sensitivity controlled by the variable POK and the output of these two blocks equal to the variable POB.
  def comp NM_ST_sensitivity_control as
    // Inputs from other components
    var POD: mmHg {priv: none, pub: in};
    // Outputs to other components
    var POB: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var POK: dimensionless {priv: none, pub: in};
    // value: ARN2 and ARN3: Sensitivity control for short-term autoregulation, with the sensitivity controlled by the variable POK and the output of these two blocks equal to the variable POB.
    POB = POD*POK+1{mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between NM_ST_sensitivity_control and NM_autoregulatory_driving_force for
    vars POD and POD;
  enddef;
  // PARAMETER CONNECTIONS
  def map between NM_ST_sensitivity_control and NM_autoregulatory_local_blood_flow_parameter_values for
    vars POK and POK;
  enddef;
  // ========================================	NON-MUSCLE SHORT-TERM TIME-DELAY AND DAMPING	=============================================

  // value: ARN5, ARN6, and ARN7: An integrative time delay system which allows the output from Block ARN7 (AR1) to approach the value POB with a time constant of (A1K). ARN7A: Damping of output from Block ARN7 to prevent oscillation when the iteration interval for computer solution of the model is long.
  def comp NM_ST_time_delay_and_damping as
    // Inputs from other components
    var POB: mmHg {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var AR1: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var A1K: minute {priv: none, pub: in};
    // Internal variables
    var AR1T: dimensionless {init: 1.02127, priv: none, pub: none};
    // value: ARN5, ARN6, and ARN7: An integrative time delay system which allows the output from Block ARN7 (AR1) to approach the value POB with a time constant of (A1K).
    ode(AR1T, time) = (POB*1{per_mmHg}-AR1T)/A1K;
    // value: ARN7A: Damping of output from Block ARN7 to prevent oscillation when the iteration interval for computer solution of the model is long.
    AR1 = sel
      case AR1T < 0.5{dimensionless}:
        0.5{dimensionless};
      otherwise:
        AR1T;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between NM_ST_time_delay_and_damping and NM_ST_sensitivity_control for
    vars POB and POB;
  enddef;
  def map between NM_ST_time_delay_and_damping and non_muscle_autoregulatory_local_blood_flow_control for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between NM_ST_time_delay_and_damping and NM_autoregulatory_local_blood_flow_parameter_values for
    vars A1K and A1K;
  enddef;
  // ========================================	NON-MUSCLE INTERMEDIATE AUTOREGULATION		=============================================

  // value: Containment grouping component for "NM_I_sensitivity_control" and "NM_I_time_delay_and_limit".
  def comp NM_intermediate_autoregulation as
  enddef;
  // ========================================	NON-MUSCLE INTERMEDIATE SENSITIVITY CONTROL	=============================================

  // value: ARN8 and ARN9: Sensitivity control for the intermediate time autoregulation controlled by variable (PON). The input is POD, and the output is POA.
  def comp NM_I_sensitivity_control as
    // Inputs from other components
    var POD: mmHg {priv: none, pub: in};
    // Outputs to other components
    var POA: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var PON: dimensionless {priv: none, pub: in};
    // value: ARN8 and ARN9: Sensitivity control for the intermediate time autoregulation controlled by variable (PON). The input is POD, and the output is POA.
    POA = PON*POD+1{mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between NM_I_sensitivity_control and NM_autoregulatory_driving_force for
    vars POD and POD;
  enddef;
  // PARAMETER CONNECTIONS
  def map between NM_I_sensitivity_control and NM_autoregulatory_local_blood_flow_parameter_values for
    vars PON and PON;
  enddef;
  // ========================================	NON-MUSCLE INTERMEDIATE TIME-DELAY AND LIMIT	=============================================

  // value: ARN11, ARN12, and ARN13: A time delay mechanism for the intermediate autoregulation which allows the output of Block ARN13 (AR2) to approach (POA) with a time constant of A2K. ARN13A: This sets a lower limit for AR2.
  def comp NM_I_time_delay_and_limit as
    // Inputs from other components
    var POA: mmHg {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var AR2: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var A2K: minute {priv: none, pub: in};
    // Internal variables
    var AR2T: dimensionless {init: 1.01179, priv: none, pub: none};
    // value: ARN11, ARN12, and ARN13: A time delay mechanism for the intermediate autoregulation which allows the output of Block ARN13 (AR2) to approach (POA) with a time constant of A2K.
    ode(AR2T, time) = (POA*1{per_mmHg}-AR2T)/A2K;
    // value: ARN13A: This sets a lower limit for AR2.
    AR2 = sel
      case AR2T < 0.5{dimensionless}:
        0.5{dimensionless};
      otherwise:
        AR2T;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between NM_I_time_delay_and_limit and NM_I_sensitivity_control for
    vars POA and POA;
  enddef;
  def map between NM_I_time_delay_and_limit and non_muscle_autoregulatory_local_blood_flow_control for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between NM_I_time_delay_and_limit and NM_autoregulatory_local_blood_flow_parameter_values for
    vars A2K and A2K;
  enddef;
  // ========================================	NON-MUSCLE LONG-TERM AUTOREGULATION	=============================================

  // value: Containment grouping component for "NM_LT_sensitivity_control" and "NM_LT_time_delay_and_limit".`
  def comp NM_long_term_autoregulation as
  enddef;
  // ========================================	NON-MUSCLE LONG-TERM SENSITIVITY CONTROL	=============================================

  // value: ARN14: Calculation of the relationship between the driving force for overall autoregulatory control (POD) and that for long-term autoregulatory control (POC). The sensitivity control is variable (POZ).
  def comp NM_LT_sensitivity_control as
    // Inputs from other components
    var POD: mmHg {priv: none, pub: in};
    // Outputs to other components
    var POC: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var POZ: dimensionless {priv: none, pub: in};
    // value: ARN14: Calculation of the relationship between the driving force for overall autoregulatory control (POD) and that for long-term autoregulatory control (POC). The sensitivity control is variable (POZ).
    POC = POZ*POD+1{mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between NM_LT_sensitivity_control and NM_autoregulatory_driving_force for
    vars POD and POD;
  enddef;
  // PARAMETER CONNECTIONS
  def map between NM_LT_sensitivity_control and NM_autoregulatory_local_blood_flow_parameter_values for
    vars POZ and POZ;
  enddef;
  // ========================================	NON-MUSCLE LONG-TERM TIME DELAY AND LOWER LIMIT	=============================================

  // value: ARN15, ARN16, and ARN17: Time delay system that allows the output of Block ARN17 (AR3) to approach POC with a time constant equal to the variable (A3K). ARN17A: This sets the lower limit for AR3.
  def comp NM_LT_time_delay_and_limit as
    // Inputs from other components
    var POC: mmHg {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var AR3: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var A3K: minute {priv: none, pub: in};
    // Internal variables
    var AR3T: dimensionless {init: 1.1448, priv: none, pub: none};
    // value: ARN15, ARN16, and ARN17: Time delay system that allows the output of Block ARN17 (AR3) to approach POC with a time constant equal to the variable (A3K).
    ode(AR3T, time) = (POC*1{per_mmHg}-AR3T)/A3K;
    // value: ARN17A: This sets the lower limit for AR3.
    AR3 = sel
      case AR3T < 0.3{dimensionless}:
        0.3{dimensionless};
      otherwise:
        AR3T;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between NM_LT_time_delay_and_limit and NM_LT_sensitivity_control for
    vars POC and POC;
  enddef;
  def map between NM_LT_time_delay_and_limit and non_muscle_autoregulatory_local_blood_flow_control for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between NM_LT_time_delay_and_limit and NM_autoregulatory_local_blood_flow_parameter_values for
    vars A3K and A3K;
  enddef;
  // ========================================	TOTAL NON-MUSCLE AUTOREGULATION	=============================================

  // value: ARN18: Multiplication of the outputs of the three different autoregulation mechanisms by multiplying AR3, AR2, and AR1 times each other, giving a total output of the non-muscle autoregulatory system equal to the variable (ARM1).
  def comp total_NM_autoregulation as
    // Inputs from other components
    var AR1: dimensionless {priv: none, pub: in};
    var AR2: dimensionless {priv: none, pub: in};
    var AR3: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ARM1: dimensionless {priv: none, pub: out};
    // value: ARN18: Multiplication of the outputs of the three different autoregulation mechanisms by multiplying AR3, AR2, and AR1 times each other, giving a total output of the non-muscle autoregulatory system equal to the variable (ARM1).
    ARM1 = AR1*AR2*AR3;
  enddef;
  // INPUT CONNECTIONS
  def map between total_NM_autoregulation and NM_ST_time_delay_and_damping for
    vars AR1 and AR1;
  enddef;
  def map between total_NM_autoregulation and NM_I_time_delay_and_limit for
    vars AR2 and AR2;
  enddef;
  def map between total_NM_autoregulation and NM_LT_time_delay_and_limit for
    vars AR3 and AR3;
  enddef;
  // ========================================	GLOBAL NON-MUSCLE BLOOD FLOW AUTOREGULATION OUTPUT	=============================================

  // value: ARN19, ARN20, and ARN21: Sensitivity control for the total autoregulatory output for non-muscle, non-renal tissues. The input is ARM1, the sensitivity control is AUTOSN, and the final output is a non-muscle autoregulatory multiplier factor (ARM) that controls non-muscle vascular resistance.
  def comp global_NM_blood_flow_autoregulation_output as
    // Inputs from other components
    var ARM1: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ARM: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var AUTOSN: dimensionless {priv: none, pub: in};
    // value: ARN19, ARN20, and ARN21: Sensitivity control for the total autoregulatory output for non-muscle, non-renal tissues. The input is ARM1, the sensitivity control is AUTOSN, and the final output is a non-muscle autoregulatory multiplier factor (ARM) that controls non-muscle vascular resistance.
    ARM = (ARM1-1{dimensionless})*AUTOSN+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between global_NM_blood_flow_autoregulation_output and total_NM_autoregulation for
    vars ARM1 and ARM1;
  enddef;
  // PARAMETER CONNECTIONS
  def map between global_NM_blood_flow_autoregulation_output and NM_autoregulatory_local_blood_flow_parameter_values for
    vars AUTOSN and AUTOSN;
  enddef;
  // =====================		NON-MUSCLE AUTOREGULATORY LOCAL BLOOD FLOW CONTROL PARAMETER VALUES		================================

  def comp NM_autoregulatory_local_blood_flow_parameter_values as
    var POR: mmHg {init: 35, priv: none, pub: out};
    // reference value of capillary PO2 in non-muscle tissue [P]
    var POK: dimensionless {init: 0.1, priv: none, pub: out};
    // sensitivity control, rapid nonmuscle autoregulation [P]
    var A1K: minute {init: 0.5, priv: none, pub: out};
    // time constant, rapid nonmuscle autoregulation [P]
    var PON: dimensionless {init: 0.1, priv: none, pub: out};
    // sensitivity control, intermediate nonmuscle autoregulation [P]
    var A2K: minute {init: 60, priv: none, pub: out};
    // time constant, intermediate nonmuscle autoregulation [P]
    var A3K: minute {init: 40000, priv: none, pub: out};
    // time constant, long-term nonmuscle autoregulation [P]
    var POZ: dimensionless {init: 2, priv: none, pub: out};
    // sensitivity control, long-term nonmuscle autoregulation [P]
    var AUTOSN: dimensionless {init: 0.9, priv: none, pub: out};
    // overall sensitivity controller, nonmuscle autoreg. [P]
  enddef;
  // ============================================================================================================================================================
  // ========================================================	NON-MUSCLE O2 DELIVERY MODEL	===========================================================

  // value: The tissues of the body are divided into non-muscle tissues and muscle tissues, and the delivery of oxygen to each one of these is calculated separately. The principal reason for this separation is that during muscle activity, the delivery of oxygen to the muscles increases tremendously and correspondingly affects the blood flow through the muscles. Several aspects of local cellular usage of oxygen are also calculated. Encapsulation grouping component containing all the components in the Non-Muscle Oxygen Delivery Model. The inputs and outputs of the Non-Muscle Oxygen Delivery Model must be passed by this component.
  def comp non_muscle_O2_delivery as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var BFN: L_per_minute {priv: out, pub: in};
    var OVA: mL_per_L {priv: out, pub: in};
    var HM: dimensionless {priv: out, pub: in};
    var AOM: dimensionless {priv: out, pub: in};
    // Outputs to components in other models
    var POT: mmHg {priv: in, pub: out};
    var DOB: mL_per_minute {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  def map between non_muscle_O2_delivery and pressure_of_O2_in_NM_tissue_cells for
    vars POT and POT;
  enddef;
  // <connection>
  // 	<map_components component_1="non_muscle_O2_delivery" component_2="delivery_of_O2_to_NM_tissues"/>
  // 	<map_variables variable_1="DOB" variable_2="DOB"/>
  // </connection>
  // ====================================================	NON-MUSCLE O2 BLOOD SUPPLY	=========================================================

  // value: ONM1: The quantity of oxygen in the arterial blood entering the non-muscle tissues per minute (O2ARTN) is equal to the oxygen volume in each liter of arterial blood (OVA) times the blood flow to the non-muscle tissues (BFN).
  def comp NM_O2_blood_supply as
    // Inputs from other components
    var OVA: mL_per_L {priv: none, pub: in};
    var BFN: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var O2ARTN: mL_per_minute {priv: none, pub: out};
    // value: ONM1: The quantity of oxygen in the arterial blood entering the non-muscle tissues per minute (O2ARTN) is equal to the oxygen volume in each liter of arterial blood (OVA) times the blood flow to the non-muscle tissues (BFN).
    O2ARTN = OVA*BFN;
  enddef;
  // INPUT CONNECTIONS
  def map between NM_O2_blood_supply and non_muscle_O2_delivery for
    vars OVA and OVA;
    vars BFN and BFN;
  enddef;
  // ========================================	NON-MUSCLE VENOUS O2 CONTENT	=============================================

  // value: ONM2: The volume of oxygen remaining in the effluent venous blood from the non-muscle tissues per minute (O2VENN) is equal to the volume of oxygen in the entering arterial blood (O2ARTN) minus the rate of delivery of oxygen to the non-muscle tissues per minute (DOB). ONM3 and ONM4: The oxygen saturation of the venous blood leaving the non-muscle tissues (OSV) is calculated from the volume of oxygen in this venous blood (O2VENN) divided by three different factors: the rate of blood flow through the non-muscle tissues (BFN), the hematocrit (HM), and a constant factor for converting volume of oxygen to saturation. Block ONM4 provides damping to prevent too rapid changes which could cause computational oscillation; the degree of damping can be altered by altering the damping factor (Z7). ONM5: The pressure of oxygen in the venous blood (POV) is calculated by multiplying the venous blood saturation (OSV) times a constant.
  def comp NM_venous_O2_content as
    // Inputs from other components
    var O2ARTN: mL_per_minute {priv: none, pub: in};
    var DOB: mL_per_minute {priv: none, pub: in};
    var BFN: L_per_minute {priv: none, pub: in};
    var HM: dimensionless {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var POV: mmHg {priv: none, pub: out};
    // Internal variables
    var OSV: dimensionless {priv: none, pub: none};
    // value: ONM2: The volume of oxygen remaining in the effluent venous blood from the non-muscle tissues per minute (O2VENN) is equal to the volume of oxygen in the entering arterial blood (O2ARTN) minus the rate of delivery of oxygen to the non-muscle tissues per minute (DOB). ONM3 and ONM4: The oxygen saturation of the venous blood leaving the non-muscle tissues (OSV) is calculated from the volume of oxygen in this venous blood (O2VENN) divided by three different factors: the rate of blood flow through the non-muscle tissues (BFN), the hematocrit (HM), and a constant factor for converting volume of oxygen to saturation. Block ONM4 provides damping to prevent too rapid changes which could cause computational oscillation; the degree of damping can be altered by altering the damping factor (Z7).
    OSV = (O2ARTN-DOB)/(HM*5.25{dimensionless}*BFN);
    // value: ONM5: The pressure of oxygen in the venous blood (POV) is calculated by multiplying the venous blood saturation (OSV) times a constant.
    POV = OSV*57.14{mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between NM_venous_O2_content and NM_O2_blood_supply for
    vars O2ARTN and O2ARTN;
  enddef;
  def map between NM_venous_O2_content and delivery_of_O2_to_NM_tissues for
    vars DOB and DOB;
    vars POV and POV;
  enddef;
  def map between NM_venous_O2_content and non_muscle_O2_delivery for
    vars BFN and BFN;
    vars HM and HM;
    vars time and time;
  enddef;
  // ========================================	O2 CONSUMPTION BY NON-MUSCLE TISSUE CELLS	=============================================

  // value: ONM14, ONM15, ONM16, ONM17, ONM18, ONM19, and ONM20: Calculation of the rate of oxygen usage by the non-muscle tissues (M02) based on three input factors: the normal rate of oxygen usage by these tissues when all other factors are normal (02M), a decreasing effect on tissue utilization of oxygen caused by very low tissue PO2's (POT) resulting mainly from failure of flow of the oxygen to the places where it is needed within the tissue (Blocks 14, 15, 16, 17, 18, and 19), and a multiplying effect on oxygen usage caused by autonomic stimulation (AOM). In addition, there is a limit set by Block ONM15 which causes the tissue oxygen level not to affect metabolism once its level is above a set value.
  def comp O2_consumption_by_NM_tissue as
    // Inputs from other components
    var POT: mmHg {priv: none, pub: in};
    var AOM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var MO2: mL_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var O2M: mL_per_minute {priv: none, pub: in};
    // Internal variables
    var P1O: mmHg {priv: none, pub: none};
    // value: ONM14, ONM15, ONM16, ONM17, ONM18, ONM19, and ONM20: Calculation of the rate of oxygen usage by the non-muscle tissues (M02) based on three input factors: the normal rate of oxygen usage by these tissues when all other factors are normal (02M), a decreasing effect on tissue utilization of oxygen caused by very low tissue PO2's (POT) resulting mainly from failure of flow of the oxygen to the places where it is needed within the tissue (Blocks 14, 15, 16, 17, 18, and 19), and a multiplying effect on oxygen usage caused by autonomic stimulation (AOM). In addition, there is a limit set by Block ONM15 which causes the tissue oxygen level not to affect metabolism once its level is above a set value.
    P1O = sel
      case POT > 35{mmHg}:
        35{mmHg};
      otherwise:
        POT;
    endsel;
    // value: ONM14, ONM15, ONM16, ONM17, ONM18, ONM19, and ONM20: Calculation of the rate of oxygen usage by the non-muscle tissues (M02) based on three input factors: the normal rate of oxygen usage by these tissues when all other factors are normal (02M), a decreasing effect on tissue utilization of oxygen caused by very low tissue PO2's (POT) resulting mainly from failure of flow of the oxygen to the places where it is needed within the tissue (Blocks 14, 15, 16, 17, 18, and 19), and a multiplying effect on oxygen usage caused by autonomic stimulation (AOM). In addition, there is a limit set by Block ONM15 which causes the tissue oxygen level not to affect metabolism once its level is above a set value.
    MO2 = AOM*O2M*(1{dimensionless}-pow(35.0001{mmHg}-P1O, 3{dimensionless})/42875{mmHg3});
  enddef;
  // INPUT CONNECTIONS
  def map between O2_consumption_by_NM_tissue and pressure_of_O2_in_NM_tissue_cells for
    vars POT and POT;
  enddef;
  def map between O2_consumption_by_NM_tissue and non_muscle_O2_delivery for
    vars AOM and AOM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between O2_consumption_by_NM_tissue and NM_O2_delivery_parameter_values for
    vars O2M and O2M;
  enddef;
  // ========================================	DELIVERY OF O2 TO NON-MUSCLE TISSUES	=============================================

  // value: ONM6: The pressure gradient of the oxygen between the venous or capillary blood of the non-muscle tissues and the tissue cells themselves (PGRN) is equal to the pressure of the oxygen in the venous blood (POV) minus the pressure in the non-muscle tissue cells (POT). ONM7: The delivery of oxygen to the non-muscle tissues (DOB) is equal to blood flow to the tissues (BFN) times the oxygen pressure gradient between the venous or capillary blood and the tissues (PGRN) times a numerical factor for conductance of oxygen from the capillaries to the tissue cells.
  def comp delivery_of_O2_to_NM_tissues as
    // Inputs from other components
    var POT: mmHg {priv: none, pub: in};
    var POV: mmHg {priv: none, pub: in};
    var BFN: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var DOB: mL_per_minute {priv: none, pub: out};
    // value: ONM6: The pressure gradient of the oxygen between the venous or capillary blood of the non-muscle tissues and the tissue cells themselves (PGRN) is equal to the pressure of the oxygen in the venous blood (POV) minus the pressure in the non-muscle tissue cells (POT). ONM7: The delivery of oxygen to the non-muscle tissues (DOB) is equal to blood flow to the tissues (BFN) times the oxygen pressure gradient between the venous or capillary blood and the tissues (PGRN) times a numerical factor for conductance of oxygen from the capillaries to the tissue cells.
    DOB = (POV-POT)*12.857{per_mmHg}*BFN;
  enddef;
  // INPUT CONNECTIONS
  def map between delivery_of_O2_to_NM_tissues and pressure_of_O2_in_NM_tissue_cells for
    vars POT and POT;
  enddef;
  def map between delivery_of_O2_to_NM_tissues and non_muscle_O2_delivery for
    vars DOB and DOB;
    vars BFN and BFN;
  enddef;
  // ========================================	VOLUME OF O2 IN NON-MUSCLE TISSUE	=============================================

  // value: ONM8: The rate of change of oxygen in the non-muscle tissues (DO2N) is equal to the rate of delivery of oxygen to the non-muscle tissues (DOB) minus the rate of metabolism of oxygen in the tissues (MO2). ONM9: Limitation in the use of oxygen by the tissues (MO2) when tissue oxygenation (Q02) falls very low. ONM10: The instantaneous quantity of oxygen in the tissues (Q02) is calculated by integrating the rate of change of the oxygen in these tissues (D02N).
  def comp volume_of_O2_in_NM_tissue as
    // Inputs from other components
    var DOB: mL_per_minute {priv: none, pub: in};
    var MO2: mL_per_minute {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var QO2: mL {priv: none, pub: out};
    // Internal variables
    var DO2N: mL_per_minute {priv: none, pub: none};
    var DO2N1: mL_per_minute {priv: none, pub: none};
    var QO2T: mL {init: 72.2362, priv: none, pub: none};
    // value: ONM8: The rate of change of oxygen in the non-muscle tissues (DO2N) is equal to the rate of delivery of oxygen to the non-muscle tissues (DOB) minus the rate of metabolism of oxygen in the tissues (MO2).
    DO2N1 = DOB-MO2;
    // value: ONM9: Limitation in the use of oxygen by the tissues (MO2) when tissue oxygenation (Q02) falls very low.
    DO2N = sel
      case (QO2 < 6{mL}) and (DO2N1 < 0{mL_per_minute}):
        DO2N1*0.1{dimensionless};
      otherwise:
        DO2N1;
    endsel;
    // value: ONM10: The instantaneous quantity of oxygen in the tissues (Q02) is calculated by integrating the rate of change of the oxygen in these tissues (D02N).
    ode(QO2T, time) = DO2N;
    // value: ONM10: The instantaneous quantity of oxygen in the tissues (Q02) is calculated by integrating the rate of change of the oxygen in these tissues (D02N).
    QO2 = sel
      case QO2T < 0{mL}:
        0{mL};
      otherwise:
        QO2T;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between volume_of_O2_in_NM_tissue and delivery_of_O2_to_NM_tissues for
    vars DOB and DOB;
  enddef;
  def map between volume_of_O2_in_NM_tissue and O2_consumption_by_NM_tissue for
    vars MO2 and MO2;
  enddef;
  def map between volume_of_O2_in_NM_tissue and non_muscle_O2_delivery for
    vars time and time;
  enddef;
  // ========================================	PRESSURE OF O2 IN NON-MUSCLE TISSUE CELLS	=============================================

  // value: ONM11: The pressure of the oxygen in the tissue cells of the non-muscle tissues (POT) is equal to the quantity of oxygen in the tissues (Q02) times a constant.
  def comp pressure_of_O2_in_NM_tissue_cells as
    // Inputs from other components
    var QO2: mL {priv: none, pub: in};
    // Outputs to other components
    var POT: mmHg {priv: none, pub: out};
    // value: ONM11: The pressure of the oxygen in the tissue cells of the non-muscle tissues (POT) is equal to the quantity of oxygen in the tissues (Q02) times a constant.
    POT = QO2*0.48611{mmHg_per_mL};
  enddef;
  // INPUT CONNECTIONS
  def map between pressure_of_O2_in_NM_tissue_cells and volume_of_O2_in_NM_tissue for
    vars QO2 and QO2;
  enddef;
  // ===========================================	NON-MUSCLE O2 DELIVERY PARAMETER VALUES	=================================================

  def comp NM_O2_delivery_parameter_values as
    var O2M: mL_per_minute {init: 164, priv: none, pub: out};
    // basic O2 utilization in nonmuscle tissues
  enddef;
  // ============================================================================================================================================================
  // ========================================================	PULMONARY FLUID DYNAMICS MODEL	===========================================================

  // value: This is a highly simplified analysis of pulmonary fluid dynamics. In general, the gel portion of the pulmonary fluid is ignored, so that the pulmonary fluid volume (VPF) is in reality an approximation of the amount of fluid that is relatively freely mobile. Though this fluid is called "interstitial fluid," it includes fluid in the respiratory passages. Likewise, the pressure-volume curve of the pulmonary interstitium is highly simplified, as well as the control of lymph flow. Nevertheless, for many purposes, this simplified analysis serves quite well. Encapsulation grouping component containing all the components in the Pulmonary Fluid Dynamics Model. The inputs and outputs of the Pulmonary Fluid Dynamics Model must be passed by this component.
  def comp pulmonary_fluid_dynamics as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var PPC: mmHg {priv: out, pub: in};
    var PPA: mmHg {priv: out, pub: in};
    var PLA: mmHg {priv: out, pub: in};
    var CPP: gram_per_L {priv: out, pub: in};
    var RPV: mmHg_minute_per_L {priv: out, pub: in};
    var RPA: mmHg_minute_per_L {priv: out, pub: in};
    // Outputs to components in other models
    var DFP: L_per_minute {priv: in, pub: out};
    var VPF: litre {priv: in, pub: out};
    var PPD: gram_per_minute {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  // <connection>
  // 	<map_components component_1="pulmonary_fluid_dynamics" component_2="pulmonary_interstitial_free_fluid_volume"/>
  // 	<map_variables variable_1="DFP" variable_2="DFP"/>
  // 	<map_variables variable_1="VPF" variable_2="VPF"/>
  // </connection>
  // <connection>
  // 	<map_components component_1="pulmonary_fluid_dynamics" component_2="concentration_of_protein_in_pulmonary_interstitium"/>
  // 	<map_variables variable_1="PPD" variable_2="PPD"/>
  // </connection>
  // ========================================	PULMONARY CAPILLARY PRESSURE	=============================================

  // value: PD1, PD2, PD2A, and PD3: Calculation of pulmonary capillary pressure (PCP) from the pulmonary arterial pressure (PPA) and left atrial pressure (PLA), and also from the vascular resistances in the arterial (RPA) and venous (RPV) sides of the pulmonary capillaries. The arterial resistance is set to be 1.6 times the venous resistance.
  def comp pulmonary_capillary_pressure as
    // Inputs from other components
    var PPA: mmHg {priv: none, pub: in};
    var PLA: mmHg {priv: none, pub: in};
    var RPV: mmHg_minute_per_L {priv: none, pub: in};
    var RPA: mmHg_minute_per_L {priv: none, pub: in};
    // Outputs to other components
    var PCP: mmHg {priv: none, pub: out};
    // value: PD1, PD2, PD2A, and PD3: Calculation of pulmonary capillary pressure (PCP) from the pulmonary arterial pressure (PPA) and left atrial pressure (PLA), and also from the vascular resistances in the arterial (RPA) and venous (RPV) sides of the pulmonary capillaries. The arterial resistance is set to be 1.6 times the venous resistance.
    PCP = (PPA-PLA)*RPV/(RPV+RPA)+PLA;
  enddef;
  // INPUT CONNECTIONS
  def map between pulmonary_capillary_pressure and pulmonary_fluid_dynamics for
    vars PPA and PPA;
    vars PLA and PLA;
    vars RPV and RPV;
    vars RPA and RPA;
  enddef;
  // ========================================	FLUID FILTRATION INTO PULMONARY INTERSTITIUM	=============================================

  // value: PD4: The pressure gradient across the pulmonary capillary membrane (PGRPCM) is equal to the pulmonary capillary pressure (PCP), plus the colloid osmotic pressure of the pulmonary interstitial fluid (POS), minus the pulmonary interstitial fluid pressure (PPI), minus the plasma colloid osmotic pressure (PPC). PD5: Rate of filtration of fluid outward through the pulmonary capillary membranes into the interstitium (PFI) is equal to the pressure gradient across the pulmonary capillary membrane (PGRPCM) times the pulmonary capillary filtration coefficient (CPF).
  def comp fluid_filtration_into_pulmonary_interstitium as
    // Inputs from other components
    var PCP: mmHg {priv: none, pub: in};
    var PPC: mmHg {priv: none, pub: in};
    var POS: mmHg {priv: none, pub: in};
    var PPI: mmHg {priv: none, pub: in};
    // Outputs to other components
    var PFI: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var CPF: L_per_minute_per_mmHg {priv: none, pub: in};
    // value: PD4: The pressure gradient across the pulmonary capillary membrane (PGRPCM) is equal to the pulmonary capillary pressure (PCP), plus the colloid osmotic pressure of the pulmonary interstitial fluid (POS), minus the pulmonary interstitial fluid pressure (PPI), minus the plasma colloid osmotic pressure (PPC). PD5: Rate of filtration of fluid outward through the pulmonary capillary membranes into the interstitium (PFI) is equal to the pressure gradient across the pulmonary capillary membrane (PGRPCM) times the pulmonary capillary filtration coefficient (CPF).
    PFI = (PCP-PPI+POS-PPC)*CPF;
  enddef;
  // INPUT CONNECTIONS
  def map between fluid_filtration_into_pulmonary_interstitium and pulmonary_capillary_pressure for
    vars PCP and PCP;
  enddef;
  def map between fluid_filtration_into_pulmonary_interstitium and pulmonary_fluid_dynamics for
    vars PPC and PPC;
  enddef;
  def map between fluid_filtration_into_pulmonary_interstitium and colloid_osmotic_pressure_of_pulmonary_interstitium for
    vars POS and POS;
  enddef;
  def map between fluid_filtration_into_pulmonary_interstitium and pulmonary_interstitial_fluid_pressure for
    vars PPI and PPI;
  enddef;
  // PARAMETER CONNECTIONS
  def map between fluid_filtration_into_pulmonary_interstitium and pulmonary_fluid_dynamics_parameter_values for
    vars CPF and CPF;
  enddef;
  // ========================================	PULMONARY INTERSTITIAL FREE FLUID VOLUME	=============================================

  // value: PD5A, PD5B, and PD5C: The rate of change of the fluid volume in the lungs (DFP) is equal to the rate of filtration of fluid out of the pulmonary capillary membranes (PFI), minus the rate of return of fluid to the circulation from the pulmonary interstitium by way of the pulmonary lymphatics (PLF). Blocks 5B and 5C are computational blocks for preventing oscillation and for preventing overshoot of the iteration. The damping factor (Z) is used at multiple points in the model. PD6: Calculation of the volume of free fluid in the pulmonary interstitium (and respiratory passageways) (VPF) by integrating the rate of change of the free fluid in the lungs (DFP). NB: - Damping in PD5B has been removed so that DFP = DFZ. - PD5C has been rearranged so that "if" statement is dependent on VPF which may alter the DFP output. (DFP IMPORTED INTO CP10 - Capillary Dynamics! CHECK THIS!!!).
  def comp pulmonary_interstitial_free_fluid_volume as
    // Inputs from other components
    var PFI: L_per_minute {priv: none, pub: in};
    var PLF: L_per_minute {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var DFP: L_per_minute {priv: none, pub: out};
    var VPF: litre {priv: none, pub: out};
    // Internal variables
    var DFZ: L_per_minute {priv: none, pub: none};
    var VPF1: litre {init: 0.0123238, priv: none, pub: none};
    // value: PD5A, PD5B, and PD5C: The rate of change of the fluid volume in the lungs (DFP) is equal to the rate of filtration of fluid out of the pulmonary capillary membranes (PFI), minus the rate of return of fluid to the circulation from the pulmonary interstitium by way of the pulmonary lymphatics (PLF). Blocks 5B and 5C are computational blocks for preventing oscillation and for preventing overshoot of the iteration. The damping factor (Z) is used at multiple points in the model. NB: - Damping in PD5B has been removed so that DFP = DFZ. - PD5C has been rearranged so that "if" statement is dependent on VPF which may alter the DFP output. (DFP IMPORTED INTO CP10 - Capillary Dynamics! CHECK THIS!!!).
    DFZ = PFI-PLF;
    // value: PD5A, PD5B, and PD5C: The rate of change of the fluid volume in the lungs (DFP) is equal to the rate of filtration of fluid out of the pulmonary capillary membranes (PFI), minus the rate of return of fluid to the circulation from the pulmonary interstitium by way of the pulmonary lymphatics (PLF). Blocks 5B and 5C are computational blocks for preventing oscillation and for preventing overshoot of the iteration. The damping factor (Z) is used at multiple points in the model. NB: - Damping in PD5B has been removed so that DFP = DFZ. - PD5C has been rearranged so that "if" statement is dependent on VPF which may alter the DFP output. (DFP IMPORTED INTO CP10 - Capillary Dynamics! CHECK THIS!!!).
    DFP = DFZ;
    // value: PD6: Calculation of the volume of free fluid in the pulmonary interstitium (and respiratory passageways) (VPF) by integrating the rate of change of the free fluid in the lungs (DFP).
    ode(VPF1, time) = DFP;
    // value: PD5A, PD5B, and PD5C: The rate of change of the fluid volume in the lungs (DFP) is equal to the rate of filtration of fluid out of the pulmonary capillary membranes (PFI), minus the rate of return of fluid to the circulation from the pulmonary interstitium by way of the pulmonary lymphatics (PLF). Blocks 5B and 5C are computational blocks for preventing oscillation and for preventing overshoot of the iteration. The damping factor (Z) is used at multiple points in the model. NB: - Damping in PD5B has been removed so that DFP = DFZ. - PD5C has been rearranged so that "if" statement is dependent on VPF which may alter the DFP output. (DFP IMPORTED INTO CP10 - Capillary Dynamics! CHECK THIS!!!).
    VPF = sel
      case VPF1 < 0.001{litre}:
        0.001{litre};
      otherwise:
        VPF1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between pulmonary_interstitial_free_fluid_volume and fluid_filtration_into_pulmonary_interstitium for
    vars PFI and PFI;
  enddef;
  def map between pulmonary_interstitial_free_fluid_volume and lung_lymphatic_protein_flow for
    vars PLF and PLF;
  enddef;
  def map between pulmonary_interstitial_free_fluid_volume and pulmonary_fluid_dynamics for
    vars DFP and DFP;
    vars VPF and VPF;
    vars time and time;
  enddef;
  // ========================================	PULMONARY INTERSTITIAL FLUID PRESSURE	=============================================

  // value: PD10 and PD11: Curve-fitting blocks to calculate the pulmonary interstitial fluid pressure (PPI) from the pulmonary interstitial fluid volume (VPF).
  def comp pulmonary_interstitial_fluid_pressure as
    // Inputs from other components
    var VPF: litre {priv: none, pub: in};
    // Outputs to other components
    var PPI: mmHg {priv: none, pub: out};
    // value: PD10 and PD11: Curve-fitting blocks to calculate the pulmonary interstitial fluid pressure (PPI) from the pulmonary interstitial fluid volume (VPF).
    PPI = 2{mmHg}-0.15{mmHg_L}/VPF;
  enddef;
  // INPUT CONNECTIONS
  def map between pulmonary_interstitial_fluid_pressure and pulmonary_interstitial_free_fluid_volume for
    vars VPF and VPF;
  enddef;
  // ========================================	CONCENTRATION OF PROTEIN IN PULMONARY INTERSTITIUM	=============================================

  // value: PD15, PD15A, and PD15B: The rate of change of the total quantity of protein in the pulmonary interstitium (PPD) is equal to the rate of influx of protein into the interstitium as a result of protein leakage through the pulmonary capillary membrane (PPN) minus the rate of return of protein to the circulation from the interstitium by way of the lymphatics (PPO). Blocks 15A and 15B are computational blocks for the purpose of preventing overshoot of an iteration and for preventing oscillation. The factor (Z) is a damping factor that is used widely throughout the model. NB: - Damping in PF15A has been removed so that PPD = PPZ. - PD15B has been rearranged so that "if" statement is dependent on PPR which may alter the PPD output. (PPD IMPORTED INTO CP33 - Capillary Dynamics! CHECK THIS!!!). PD16: The total quantity of protein in the pulmonary interstital free fluid (PPR) is calculated by integrating with respect to time the rate of change of protein in the pulmonary interstitium (PPD). PD17: The concentration of protein in the pulmonary interstitium (CPN) is equal to the total quantity of protein in the interstitium (PPR) divided by the volume of interstitial fluid (VPF).
  def comp concentration_of_protein_in_pulmonary_interstitium as
    // Inputs from other components
    var PPO: gram_per_minute {priv: none, pub: in};
    var PPN: gram_per_minute {priv: none, pub: in};
    var VPF: litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var PPD: gram_per_minute {priv: none, pub: out};
    var CPN: gram_per_L {priv: none, pub: out};
    // Internal variables
    var PPZ: gram_per_minute {priv: none, pub: none};
    var PPR1: gram {init: 0.419998, priv: none, pub: none};
    var PPR: gram {priv: none, pub: none};
    // value: PD15, PD15A, and PD15B: The rate of change of the total quantity of protein in the pulmonary interstitium (PPD) is equal to the rate of influx of protein into the interstitium as a result of protein leakage through the pulmonary capillary membrane (PPN) minus the rate of return of protein to the circulation from the interstitium by way of the lymphatics (PPO). Blocks 15A and 15B are computational blocks for the purpose of preventing overshoot of an iteration and for preventing oscillation. The factor (Z) is a damping factor that is used widely throughout the model. NB: - Damping in PF15A has been removed so that PPD = PPZ. - PD15B has been rearranged so that "if" statement is dependent on PPR which may alter the PPD output. (PPD IMPORTED INTO CP33 - Capillary Dynamics! CHECK THIS!!!).
    PPZ = PPN-PPO;
    // value: PD15, PD15A, and PD15B: The rate of change of the total quantity of protein in the pulmonary interstitium (PPD) is equal to the rate of influx of protein into the interstitium as a result of protein leakage through the pulmonary capillary membrane (PPN) minus the rate of return of protein to the circulation from the interstitium by way of the lymphatics (PPO). Blocks 15A and 15B are computational blocks for the purpose of preventing overshoot of an iteration and for preventing oscillation. The factor (Z) is a damping factor that is used widely throughout the model. NB: - Damping in PF15A has been removed so that PPD = PPZ. - PD15B has been rearranged so that "if" statement is dependent on PPR which may alter the PPD output. (PPD IMPORTED INTO CP33 - Capillary Dynamics! CHECK THIS!!!).
    PPD = PPZ;
    // value: PD16: The total quantity of protein in the pulmonary interstital free fluid (PPR) is calculated by integrating with respect to time the rate of change of protein in the pulmonary interstitium (PPD).
    ode(PPR1, time) = PPD;
    // value: PD15, PD15A, and PD15B: The rate of change of the total quantity of protein in the pulmonary interstitium (PPD) is equal to the rate of influx of protein into the interstitium as a result of protein leakage through the pulmonary capillary membrane (PPN) minus the rate of return of protein to the circulation from the interstitium by way of the lymphatics (PPO). Blocks 15A and 15B are computational blocks for the purpose of preventing overshoot of an iteration and for preventing oscillation. The factor (Z) is a damping factor that is used widely throughout the model. NB: - Damping in PF15A has been removed so that PPD = PPZ. - PD15B has been rearranged so that "if" statement is dependent on PPR which may alter the PPD output. (PPD IMPORTED INTO CP33 - Capillary Dynamics! CHECK THIS!!!).
    PPR = sel
      case PPR1 < 0.025{gram}:
        0.025{gram};
      otherwise:
        PPR1;
    endsel;
    // value: PD17: The concentration of protein in the pulmonary interstitium (CPN) is equal to the total quantity of protein in the interstitium (PPR) divided by the volume of interstitial fluid (VPF).
    CPN = PPR/VPF;
  enddef;
  // INPUT CONNECTIONS
  def map between concentration_of_protein_in_pulmonary_interstitium and pulmonary_interstitial_free_fluid_volume for
    vars VPF and VPF;
  enddef;
  def map between concentration_of_protein_in_pulmonary_interstitium and pulmonary_fluid_dynamics for
    vars PPD and PPD;
    vars time and time;
  enddef;
  // ========================================	COLLOID OSMOTIC PRESSURE OF PULMONARY INTERSTITIUM	=============================================

  // value: PD18: The colloid osmotic pressure of the pulmonary interstitial fluid (POS) is equal to the concentration of protein in the pulmonary interstitium (CPN) times a constant.
  def comp colloid_osmotic_pressure_of_pulmonary_interstitium as
    // Inputs from other components
    var CPN: gram_per_L {priv: none, pub: in};
    // Outputs to other components
    var POS: mmHg {priv: none, pub: out};
    // value: PD18: The colloid osmotic pressure of the pulmonary interstitial fluid (POS) is equal to the concentration of protein in the pulmonary interstitium (CPN) times a constant.
    POS = CPN*0.4{L_mmHg_per_gram};
  enddef;
  // INPUT CONNECTIONS
  def map between colloid_osmotic_pressure_of_pulmonary_interstitium and concentration_of_protein_in_pulmonary_interstitium for
    vars CPN and CPN;
  enddef;
  // ========================================	PROTEIN LEAKAGE INTO PULMONARY INTERSTITIUM		=============================================

  // value: PD19 and PD20: The rate of leakage of protein through the pulmonary capillary membrane into the pulmonary interstitium (PPN) is equal to the concentration of protein in the plasma (CPP), minus the concentration of protein in the pulmonary interstitium (CPN) times a constant.
  def comp protein_leakage_into_pulmonary_interstitium as
    // Inputs from other components
    var CPP: gram_per_L {priv: none, pub: in};
    var CPN: gram_per_L {priv: none, pub: in};
    // Outputs to other components
    var PPN: gram_per_minute {priv: none, pub: out};
    // value: PD19 and PD20: The rate of leakage of protein through the pulmonary capillary membrane into the pulmonary interstitium (PPN) is equal to the concentration of protein in the plasma (CPP), minus the concentration of protein in the pulmonary interstitium (CPN) times a constant.
    PPN = (CPP-CPN)*0.000225{L_per_minute};
  enddef;
  // INPUT CONNECTIONS
  def map between protein_leakage_into_pulmonary_interstitium and pulmonary_fluid_dynamics for
    vars CPP and CPP;
  enddef;
  def map between protein_leakage_into_pulmonary_interstitium and concentration_of_protein_in_pulmonary_interstitium for
    vars CPN and CPN;
    vars PPN and PPN;
  enddef;
  // ========================================	LUNG LYMPHATIC PROTEIN FLOW		=============================================

  // value: PD12 and PD13: Curve-fitting blocks to calculate the rate of pulmonary lymph flow (PLF) from the pulmonary interstitial fluid pressure (PPI). PD14: Rate of return of protein from the pulmonary interstitium to the circulation in the pulmonary lymph (PPO) is equal to the concentration of protein in the pulmonary interstitial fluid (CPN) times the rate of pulmonary lymph flow (PLF).
  def comp lung_lymphatic_protein_flow as
    // Inputs from other components
    var PPI: mmHg {priv: none, pub: in};
    var CPN: gram_per_L {priv: none, pub: in};
    // Outputs to other components
    var PLF: L_per_minute {priv: none, pub: out};
    var PPO: gram_per_minute {priv: none, pub: out};
    // value: PD12 and PD13: Curve-fitting blocks to calculate the rate of pulmonary lymph flow (PLF) from the pulmonary interstitial fluid pressure (PPI).
    PLF = (PPI+11{mmHg})*0.0003{L_per_minute_per_mmHg};
    // value: PD14: Rate of return of protein from the pulmonary interstitium to the circulation in the pulmonary lymph (PPO) is equal to the concentration of protein in the pulmonary interstitial fluid (CPN) times the rate of pulmonary lymph flow (PLF).
    PPO = PLF*CPN;
  enddef;
  // INPUT CONNECTIONS
  def map between lung_lymphatic_protein_flow and pulmonary_interstitial_fluid_pressure for
    vars PPI and PPI;
  enddef;
  def map between lung_lymphatic_protein_flow and concentration_of_protein_in_pulmonary_interstitium for
    vars CPN and CPN;
    vars PPO and PPO;
  enddef;
  // =======================================	PULMONARY FLUID DYNAMICS PARAMETER VALUES	===============================================

  def comp pulmonary_fluid_dynamics_parameter_values as
    var CPF: L_per_minute_per_mmHg {init: 0.0003, priv: none, pub: out};
    // pulmonary capillary filtration coefficient [P]
  enddef;
  // ============================================================================================================================================================
  // ========================================================	PULMONARY OXYGEN UPTAKE MODEL	===========================================================

  // value: This section calculates the dynamics of oxygen uptake by the lungs, and calculates also the combination of the oxygen with the hemoglobin of the blood. Encapsulation grouping component containing all the components in the Pulmonary Oxygen Uptake Model. The inputs and outputs of the Pulmonary Oxygen Uptake Model must be passed by this component.
  def comp pulmonary_O2_uptake as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var VPF: litre {priv: out, pub: in};
    var DOB: mL_per_minute {priv: out, pub: in};
    var QRO: L_per_minute {priv: out, pub: in};
    var RMO: mL_per_minute {priv: out, pub: in};
    var HM: dimensionless {priv: out, pub: in};
    // Outputs to components in other models
    var OVA: mL_per_L {priv: in, pub: out};
    var PO2ART: mmHg {priv: in, pub: out};
    var OSA: dimensionless {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  // <connection>
  // 	<map_components component_1="pulmonary_O2_uptake" component_2="O2_volume_of_arterial_blood"/>
  // 	<map_variables variable_1="OVA" variable_2="OVA"/>
  // </connection>
  // <connection>
  // 	<map_components component_1="pulmonary_O2_uptake" component_2="arterial_PO2"/>
  // 	<map_variables variable_1="PO2ART" variable_2="PO2ART"/>
  // 	<map_variables variable_1="OSA" variable_2="OSA"/>
  // </connection>
  // ========================================	TOTAL O2 UTILIZATION	=============================================

  // value: PO1: Calculation of total oxygen utilization by the body (O2UTIL) by adding the oxygen usage by the muscles (RMO) plus oxygen usage by non-muscle parts of the body (DOB).
  def comp total_O2_utilization as
    // Inputs from other components
    var DOB: mL_per_minute {priv: none, pub: in};
    var RMO: mL_per_minute {priv: none, pub: in};
    // Outputs to other components
    var O2UTIL: mL_per_minute {priv: none, pub: out};
    // value: PO1: Calculation of total oxygen utilization by the body (O2UTIL) by adding the oxygen usage by the muscles (RMO) plus oxygen usage by non-muscle parts of the body (DOB).
    O2UTIL = DOB+RMO;
  enddef;
  // INPUT CONNECTIONS
  def map between total_O2_utilization and pulmonary_O2_uptake for
    vars DOB and DOB;
    vars RMO and RMO;
  enddef;
  // ========================================	ALVEOLAR VENTILATION	=============================================

  // value: PO2: Calculation of alveolar ventilation (ALVENT). The details of this block will be discussed in relation to blocks 14 through 24.
  def comp alveolar_ventilation as
    // Inputs from other components
    var O2UTIL: mL_per_minute {priv: none, pub: in};
    var O2VAD2: dimensionless {priv: none, pub: in};
    var O2VTS2: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ALVENT: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var VNTSTM: dimensionless {priv: none, pub: in};
    // value: PO2: Calculation of alveolar ventilation (ALVENT). The details of this block will be discussed in relation to blocks 14 through 24.
    ALVENT = O2UTIL*VNTSTM*0.026667{L_per_mL}*O2VTS2*O2VAD2;
  enddef;
  // INPUT CONNECTIONS
  def map between alveolar_ventilation and total_O2_utilization for
    vars O2UTIL and O2UTIL;
  enddef;
  def map between alveolar_ventilation and progressive_chemoreceptor_adaptation_of_alveolar_ventilation for
    vars O2VAD2 and O2VAD2;
  enddef;
  def map between alveolar_ventilation and acute_chemoreceptor_adaptation_of_alveolar_ventilation for
    vars O2VTS2 and O2VTS2;
  enddef;
  // PARAMETER CONNECTIONS
  def map between alveolar_ventilation and pulmonary_O2_uptake_parameter_values for
    vars VNTSTM and VNTSTM;
  enddef;
  // ========================================	ALVEOLAR OXYGEN PRESSURE	=============================================

  // value: PO3 and PO4: The output of block 3 is the decrease in oxygen pressure between the humidified air breathed into the trachea and the PO2 in the alveoli. It is calculated by dividing the rate of oxygen utilization (O2UTIL) by the rate of alveolar ventilation (ALVENT) and by a constant. Block PO4 calculates the alveolar PO2 (PO2ALV) by subtracting the PO2 decrease (output of block 3) from the PO2 of ambient humidified air (PO2AMB) entering the trachea.
  def comp alveolar_PO2 as
    // Inputs from other components
    var O2UTIL: mL_per_minute {priv: none, pub: in};
    var ALVENT: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var PO2ALV: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var PO2AMB: mmHg {priv: none, pub: in};
    // value: PO3 and PO4: The output of block 3 is the decrease in oxygen pressure between the humidified air breathed into the trachea and the PO2 in the alveoli. It is calculated by dividing the rate of oxygen utilization (O2UTIL) by the rate of alveolar ventilation (ALVENT) and by a constant. Block PO4 calculates the alveolar PO2 (PO2ALV) by subtracting the PO2 decrease (output of block 3) from the PO2 of ambient humidified air (PO2AMB) entering the trachea.
    PO2ALV = PO2AMB-O2UTIL/ALVENT/0.761{mL_per_L_per_mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between alveolar_PO2 and total_O2_utilization for
    vars O2UTIL and O2UTIL;
  enddef;
  def map between alveolar_PO2 and alveolar_ventilation for
    vars ALVENT and ALVENT;
  enddef;
  // PARAMETER CONNECTIONS
  def map between alveolar_PO2 and pulmonary_O2_uptake_parameter_values for
    vars PO2AMB and PO2AMB;
  enddef;
  // ========================================	RESPIRATORY OXYGEN DIFFUSION INTO CAPILLARIES	=============================================

  // value: PO5: Calculation of the pressure difference between alveolar PO2 (PO2ALV) and arterialized blood PO2 (PO2ART) leaving the lungs. PO6 and PO7: Calculation of the respiratory diffusion coefficient (RSPDFC) for diffusion of oxygen between the alveoli and the blood leaving the pulmonary capillaries. Block PO6 calculates a resistance to oxygen diffusion that varies in proportion to the amount of free fluid in the alveoli (VPF) and the amount of pulmonary tissue through which the oxygen must diffuse (VPTISS). Block 7 calculates the respiratory diffusion coefficient (RSPDFC) by dividing a constant (PL2) by the resistance to diffusion as calculated from block 6. PO8: Calculation of the rate of oxygen diffusion through the pulmonary membrane into the capillaries (O2DFS) by multiplying the pressure difference (output of Block PO5) between the alveoli and the pulmonary arterialized capillary blood times the respiratory diffusion coefficient (RSPDFC).
  def comp respiratory_O2_diffusion_into_capillaries as
    // Inputs from other components
    var PO2ALV: mmHg {priv: none, pub: in};
    var PO2ART: mmHg {priv: none, pub: in};
    var VPF: litre {priv: none, pub: in};
    // Outputs to other components
    var O2DFS: mL_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var PL2: L_mL_per_minute_per_mmHg {priv: none, pub: in};
    var VPTISS: litre {priv: none, pub: in};
    // Internal variables
    var RSPDFC: mL_per_minute_per_mmHg {priv: none, pub: none};
    // value: PO6 and PO7: Calculation of the respiratory diffusion coefficient (RSPDFC) for diffusion of oxygen between the alveoli and the blood leaving the pulmonary capillaries. Block PO6 calculates a resistance to oxygen diffusion that varies in proportion to the amount of free fluid in the alveoli (VPF) and the amount of pulmonary tissue through which the oxygen must diffuse (VPTISS). Block 7 calculates the respiratory diffusion coefficient (RSPDFC) by dividing a constant (PL2) by the resistance to diffusion as calculated from block 6.
    RSPDFC = PL2/(VPTISS+VPF);
    // value: PO5: Calculation of the pressure difference between alveolar PO2 (PO2ALV) and arterialized blood PO2 (PO2ART) leaving the lungs. PO8: Calculation of the rate of oxygen diffusion through the pulmonary membrane into the capillaries (O2DFS) by multiplying the pressure difference (output of Block PO5) between the alveoli and the pulmonary arterialized capillary blood times the respiratory diffusion coefficient (RSPDFC).
    O2DFS = (PO2ALV-PO2ART)*RSPDFC;
  enddef;
  // INPUT CONNECTIONS
  def map between respiratory_O2_diffusion_into_capillaries and alveolar_PO2 for
    vars PO2ALV and PO2ALV;
  enddef;
  def map between respiratory_O2_diffusion_into_capillaries and arterial_PO2 for
    vars PO2ART and PO2ART;
  enddef;
  def map between respiratory_O2_diffusion_into_capillaries and pulmonary_O2_uptake for
    vars VPF and VPF;
  enddef;
  // PARAMETER CONNECTIONS
  def map between respiratory_O2_diffusion_into_capillaries and pulmonary_O2_uptake_parameter_values for
    vars PL2 and PL2;
    vars VPTISS and VPTISS;
  enddef;
  // ========================================	OXYGEN VOLUME OF ARTERIAL BLOOD	=============================================

  // value: PO9: Calculation of the difference between oxygen diffusion into the capillary blood of the lungs (O2DFS) and the rate of oxygen utilization by the body (O2UTIL). PO10: Calculation of the rate of change of oxygen per liter of blood passing through the lungs (DOVA) by dividing the rate of change of total amount of oxygen entering the arterial blood per minute (output of Block 9) by the rate of blood flow through the lungs (QRO). PO11: Calculation of the volume of oxygen in milliliters in each liter of arterial blood (OVA) leaving the left ventricle by integrating the rate of change of oxygen in the arterial blood (DOVA) with respect to time.
  def comp O2_volume_of_arterial_blood as
    // Inputs from other components
    var O2DFS: mL_per_minute {priv: none, pub: in};
    var O2UTIL: mL_per_minute {priv: none, pub: in};
    var QRO: L_per_minute {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var OVA: mL_per_L {init: 204.497, priv: none, pub: out};
    // Internal variables
    var DOVA: mL_per_L_per_minute {priv: none, pub: none};
    // value: PO9: Calculation of the difference between oxygen diffusion into the capillary blood of the lungs (O2DFS) and the rate of oxygen utilization by the body (O2UTIL). PO10: Calculation of the rate of change of oxygen per liter of blood passing through the lungs (DOVA) by dividing the rate of change of total amount of oxygen entering the arterial blood per minute (output of Block 9) by the rate of blood flow through the lungs (QRO).
    DOVA = (O2DFS-O2UTIL)/(QRO*1.0{minute});
    // value: PO11: Calculation of the volume of oxygen in milliliters in each liter of arterial blood (OVA) leaving the left ventricle by integrating the rate of change of oxygen in the arterial blood (DOVA) with respect to time.
    ode(OVA, time) = DOVA;
  enddef;
  // INPUT CONNECTIONS
  def map between O2_volume_of_arterial_blood and respiratory_O2_diffusion_into_capillaries for
    vars O2DFS and O2DFS;
  enddef;
  def map between O2_volume_of_arterial_blood and total_O2_utilization for
    vars O2UTIL and O2UTIL;
  enddef;
  def map between O2_volume_of_arterial_blood and pulmonary_O2_uptake for
    vars QRO and QRO;
    vars OVA and OVA;
    vars time and time;
  enddef;
  // ========================================	ARTERIAL OXYGEN PRESSURE	=============================================

  // value: PO12: Calculation of the arterial oxygen saturation (OSA) by dividing concentration of arterial oxygen in the arterial blood (OVA) by the hematocrit (HM) and by a constant that relates the saturation to oxygen content. PO13: Calculation of PO2 in the arterial blood (PO2ART) at each level of arterial hemoglobin oxygen saturation (OSA).
  def comp arterial_PO2 as
    // Inputs from other components
    var OVA: mL_per_L {priv: none, pub: in};
    var HM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var PO2ART: mmHg {priv: none, pub: out};
    var OSA: dimensionless {priv: none, pub: out};
    // value: PO12: Calculation of the arterial oxygen saturation (OSA) by dividing concentration of arterial oxygen in the arterial blood (OVA) by the hematocrit (HM) and by a constant that relates the saturation to oxygen content.
    OSA = OVA/HM/5.25{dimensionless};
    // value: PO13: Calculation of PO2 in the arterial blood (PO2ART) at each level of arterial hemoglobin oxygen saturation (OSA).
    PO2ART = sel
      case OSA > 1{dimensionless}:
        114{mmHg}+(OSA-1{dimensionless})*6667{mmHg};
      case (OSA > 0.936{dimensionless}) and (OSA <= 1{dimensionless}):
        74{mmHg}+(OSA-0.936{dimensionless})*625{mmHg};
      case (OSA > 0.8{dimensionless}) and (OSA <= 0.936{dimensionless}):
        46{mmHg}+(OSA-0.8{dimensionless})*205.882{mmHg};
      otherwise:
        OSA*57.5{mmHg};
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between arterial_PO2 and O2_volume_of_arterial_blood for
    vars OVA and OVA;
  enddef;
  def map between arterial_PO2 and pulmonary_O2_uptake for
    vars PO2ART and PO2ART;
    vars OSA and OSA;
    vars HM and HM;
  enddef;
  // =====================================		CHEMORECEPTOR ADAPTATION OF ALVEOLAR VENTILATION		=========================================

  // value: Containment grouping component for "acute_chemoreceptor_adaptation_of_alveolar_ventilation" and "progressive_chemoreceptor_adaptation_of_alveolar_ventilation". PO14, PO15, PO16, PO17, PO18, PO19, PO20, PO21, PO22, PO23, PO24, and PO22: This system of blocks calculates the effect of the O2 chemoreceptors in the carotid and aortic bodies on alveoli ventilation (ALVENT). That is, when the arterial PO2 from Block 13 (PO2ART) falls below normal, this increases the alveolar ventilation because of increased chemoreceptor stimulation. The increase in ventilation occurs in two stages. One of these is an acute stage (calculated in Blocks 14-18) which becomes fully activated within a few minutes. The second stage is a progressive adaptation of this chemoreceptor control mechanism to increase pulmonary ventilation another several fold over 1 to 3 days (calculated in Blocks 19-24). The output of Block 18 (O2VTS2) is the initial acute adjustment of ventilation. Blocks 16 and 17 set the upper and lower limits to this acute response to low oxygen. The delayed effect on ventilation is the output of Block 24 (O2VAD2). Blocks 19, 20, and 21 adjust the sensitivity of this delayed response. Block 22 provides the time constant for this response. Block 2 multiplies the short-time constant response (O2VST2) times the long-time constant response (O2VAD2). Another input to Block 2 is the rate of oxygen utilization by the body [O2UTIL]. Physiologically, this is not a stimulus to ventilation. However, in this model we do not calculate CO2 in the blood which is a powerful stimulant of ventilation. Since the amount of carbon dioxide that is formed over a period of minutes is approximately proportional to the rate of oxygen utilization, we have used this O2UTIL factor as one of the normalized stimulatory factors of alveolar ventilation in Block 2, but realizing that this is simply a substitute for rate of carbon dioxide formation if the model were worked out in much greater detail. Still another input is a special factor (VNTSTM) which allows the overall level of alveolar ventilation to be increased or decreased artificially.
  def comp chemoreceptor_adaptation_of_alveolar_ventilation as
  enddef;
  // ===================================	ACUTE CHEMORECEPTOR ADAPTATION OF ALVEOLAR VENTILATION		==================================

  // value: See description in "chemoreceptor_adaptation_of_alveolar_ventilation".
  def comp acute_chemoreceptor_adaptation_of_alveolar_ventilation as
    // Inputs from other components
    var PO2ART: mmHg {priv: none, pub: in};
    // Outputs to other components
    var O2VTS2: dimensionless {priv: none, pub: out};
    // Internal variables
    var O2VTST: dimensionless {priv: none, pub: none};
    var O2VTST1: dimensionless {priv: none, pub: none};
    O2VTST1 = (PO2ART-67{mmHg})/30{mmHg};
    O2VTST = sel
      case O2VTST1 > 1{dimensionless}:
        1{dimensionless};
      case O2VTST1 < 0.6{dimensionless}:
        0.6{dimensionless};
      otherwise:
        O2VTST1;
    endsel;
    O2VTS2 = 1{dimensionless}/O2VTST;
  enddef;
  // INPUT CONNECTIONS
  def map between acute_chemoreceptor_adaptation_of_alveolar_ventilation and arterial_PO2 for
    vars PO2ART and PO2ART;
  enddef;
  // ==============================	PROGRESSIVE CHEMORECEPTOR ADAPTATION OF ALVEOLAR VENTILATION	==================================

  // value: See description in chemoreceptor_adaptation_of_alveolar_ventilation.
  def comp progressive_chemoreceptor_adaptation_of_alveolar_ventilation as
    // Inputs from other components
    var O2VTS2: dimensionless {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var O2VAD2: dimensionless {priv: none, pub: out};
    // Internal variables
    var DO2VAD: per_minute {priv: none, pub: none};
    var O2VAD1: dimensionless {init: 2.368e-07, priv: none, pub: none};
    DO2VAD = ((O2VTS2-1{dimensionless})*3{dimensionless}-O2VAD1)*0.0005{per_minute};
    ode(O2VAD1, time) = DO2VAD;
    O2VAD2 = O2VAD1+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between progressive_chemoreceptor_adaptation_of_alveolar_ventilation and acute_chemoreceptor_adaptation_of_alveolar_ventilation for
    vars O2VTS2 and O2VTS2;
  enddef;
  def map between progressive_chemoreceptor_adaptation_of_alveolar_ventilation and pulmonary_O2_uptake for
    vars time and time;
  enddef;
  // ==========================================	PULMONARY OXYGEN UPTAKE PARAMETER VALUES		=============================================

  def comp pulmonary_O2_uptake_parameter_values as
    var PO2AMB: mmHg {init: 150, priv: none, pub: out};
    // ambiant PO2
    var PL2: L_mL_per_minute_per_mmHg {init: 1.8, priv: none, pub: out};
    // constant, computation of RSPDFC [P]
    var VPTISS: litre {init: 0.0175, priv: none, pub: out};
    // pulmonary tissue fluid volume [P]
    var VNTSTM: dimensionless {init: 1, priv: none, pub: out};
    // sensitivity controller for alveolar ventilation [P]
  enddef;
  // ============================================================================================================================================================
  // ===================================================	RED CELLS AND VISCOSITY MODEL	======================================================

  // value: The red cell volume is considered to be controlled by two principal factors that control the production of erythropoietin: (1) the arterial blood oxygen saturation (OSA) and renal function as determined by renal blood flow (RFN), and (2) the fraction (REK) of the renal mass that is functional. Encapsulation grouping component containing all the components in the Red Cells and Viscosity Model. The inputs and outputs of the Red Cells and Viscosity Model must be passed by this component.
  def comp red_cells_and_viscosity as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var VP: litre {priv: out, pub: in};
    // Outputs to components in other models
    var VIM: dimensionless {priv: in, pub: out};
    var HM: dimensionless {priv: in, pub: out};
    var HM1: dimensionless {priv: in, pub: out};
    var VRC: litre {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  def map between red_cells_and_viscosity and blood_viscosity for
    vars VIM and VIM;
  enddef;
  // <connection>
  // 	<map_components component_1="red_cells_and_viscosity" component_2="hematocrit_fraction"/>
  // 	<map_variables variable_1="HM" variable_2="HM"/>
  // 	<map_variables variable_1="HM1" variable_2="HM1"/>
  // </connection>
  // <connection>
  // 	<map_components component_1="red_cells_and_viscosity" component_2="RBC_volume"/>
  // 	<map_variables variable_1="VRC" variable_2="VRC"/>
  // </connection>
  // ========================================	BLOOD VISCOSITY CALCULATIONS	=============================================

  // value: Containment grouping component for "hematocrit_fraction", "viscosity_due_to_RBCs" and "blood_viscosity".
  def comp blood_viscosity_calculations as
  enddef;
  // ========================================	HEMATOCRIT_FRACTION	=============================================

  // value: RC6: Calculation of blood volume (VB) by adding the volume of the red blood cells (VRC) to the plasma volume (VP). RC7: The fraction of the blood that is composed of red blood cells (HM1) is equal to the volume of red blood cells (VRC) divided by the blood volume (VB). RC8: The hematocrit (HM) equals the fraction of the blood that is red cells (HM1) times 100.
  def comp hematocrit_fraction as
    // Inputs from other components
    var VP: litre {priv: none, pub: in};
    var VRC: litre {priv: none, pub: in};
    // Outputs to other components
    var HM: dimensionless {priv: none, pub: out};
    var HM1: dimensionless {priv: none, pub: out};
    // Internal variables
    var VB: litre {priv: none, pub: none};
    // value: RC6: Calculation of blood volume (VB) by adding the volume of the red blood cells (VRC) to the plasma volume (VP).
    VB = VP+VRC;
    // value: RC7: The fraction of the blood that is composed of red blood cells (HM1) is equal to the volume of red blood cells (VRC) divided by the blood volume (VB).
    HM1 = VRC/VB;
    // value: RC8: The hematocrit (HM) equals the fraction of the blood that is red cells (HM1) times 100.
    HM = 100{dimensionless}*HM1;
  enddef;
  // INPUT CONNECTIONS
  def map between hematocrit_fraction and red_cells_and_viscosity for
    vars HM and HM;
    vars HM1 and HM1;
    vars VP and VP;
  enddef;
  def map between hematocrit_fraction and RBC_volume for
    vars VRC and VRC;
  enddef;
  // ========================================	VISCOSITY DUE TO RED BLOOD CELLS	=============================================

  // value: RC9, RC10, and RC11: Curve-fitting blocks to calculate the portion of the viscosity of the blood that is caused by red blood cells (VIE). The two variables (HMK and HKM) are curve-fitting constants.
  def comp viscosity_due_to_RBCs as
    // Inputs from other components
    var HM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var VIE: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var HMK: dimensionless {priv: none, pub: in};
    var HKM: dimensionless {priv: none, pub: in};
    // value: RC9, RC10, and RC11: Curve-fitting blocks to calculate the portion of the viscosity of the blood that is caused by red blood cells (VIE). The two variables (HMK and HKM) are curve-fitting constants.
    VIE = HM/((HMK-HM)*HKM);
  enddef;
  // INPUT CONNECTIONS
  def map between viscosity_due_to_RBCs and hematocrit_fraction for
    vars HM and HM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between viscosity_due_to_RBCs and red_cells_and_viscosity_parameter_values for
    vars HMK and HMK;
    vars HKM and HKM;
  enddef;
  // ========================================	BLOOD VISCOSITY	=============================================

  // value: RC12: The viscosity of the blood (VIB) when calculated as a multiple of the viscosity of water is equal to the viscosity effect caused by the red cells (VIE) plus a constant determined by the viscosity of the plasma. RC13: Calculation of a normalized viscosity multiplier factor (VIM) that is used elsewhere in the circulation to calculate the effect of changes in the viscosity from normal (assumed to be 1.0) on various circulatory effects.
  def comp blood_viscosity as
    // Inputs from other components
    var VIE: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var VIM: dimensionless {priv: none, pub: out};
    // Internal variables
    var VIB: dimensionless {priv: none, pub: none};
    // value: RC12: The viscosity of the blood (VIB) when calculated as a multiple of the viscosity of water is equal to the viscosity effect caused by the red cells (VIE) plus a constant determined by the viscosity of the plasma.
    VIB = VIE+1.5{dimensionless};
    // value: RC13: Calculation of a normalized viscosity multiplier factor (VIM) that is used elsewhere in the circulation to calculate the effect of changes in the viscosity from normal (assumed to be 1.0) on various circulatory effects.
    VIM = 0.3333{dimensionless}*VIB;
  enddef;
  // INPUT CONNECTIONS
  def map between blood_viscosity and viscosity_due_to_RBCs for
    vars VIE and VIE;
  enddef;
  // ========================================	RED_BLOOD_CELLS_FORMATION_AND_DESTRUCTION	=============================================

  // value: Containment grouping component for "oxygen_stimulation", "RBC_production", "RBC_destruction" and "blood_viscosity".
  def comp RBC_formation_and_destruction as
  enddef;
  // ========================================	OXYGEN_STIMULATION	=============================================

  // value: RC1, RC1A, RC1B, RC1C, RC1D, RC2, RC2C, and RC2D: Calculation of the effect of atmospheric O2 pressure (PO2AMB) on the driving force (HM7) for production of red blood cells. RC1A, RC1B, and RC1D calculate the effect of pressures below the level of 80 mmHg, and RC1 the effect of pressures above 80. Blocks RC2, RC2C, and RC2D provide limits to the effects.
  def comp oxygen_stimulation as
    // Inputs from other components
    var HM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var HM7: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var PO2AMB: mmHg {priv: none, pub: in};
    var HM6: mmHg {priv: none, pub: in};
    // Internal variables
    var PO2AM1: mmHg {priv: none, pub: none};
    var HM3: mmHg {priv: none, pub: none};
    var HM4: mmHg {priv: none, pub: none};
    var HM5: mmHg {priv: none, pub: none};
    // value: RC1, RC1A, RC1B, RC1C, RC1D, RC2, RC2C, and RC2D: Calculation of the effect of atmospheric O2 pressure (PO2AMB) on the driving force (HM7) for production of red blood cells. RC1A, RC1B, and RC1D calculate the effect of pressures below the level of 80 mmHg, and RC1 the effect of pressures above 80. Blocks RC2, RC2C, and RC2D provide limits to the effects.
    PO2AM1 = sel
      case PO2AMB > 80{mmHg}:
        80{mmHg};
      otherwise:
        PO2AMB;
    endsel;
    // value: RC1, RC1A, RC1B, RC1C, RC1D, RC2, RC2C, and RC2D: Calculation of the effect of atmospheric O2 pressure (PO2AMB) on the driving force (HM7) for production of red blood cells. RC1A, RC1B, and RC1D calculate the effect of pressures below the level of 80 mmHg, and RC1 the effect of pressures above 80. Blocks RC2, RC2C, and RC2D provide limits to the effects.
    HM3 = (PO2AM1-40{mmHg})*HM;
    // value: RC1, RC1A, RC1B, RC1C, RC1D, RC2, RC2C, and RC2D: Calculation of the effect of atmospheric O2 pressure (PO2AMB) on the driving force (HM7) for production of red blood cells. RC1A, RC1B, and RC1D calculate the effect of pressures below the level of 80 mmHg, and RC1 the effect of pressures above 80. Blocks RC2, RC2C, and RC2D provide limits to the effects.
    HM4 = PO2AMB-40{mmHg};
    // value: RC1, RC1A, RC1B, RC1C, RC1D, RC2, RC2C, and RC2D: Calculation of the effect of atmospheric O2 pressure (PO2AMB) on the driving force (HM7) for production of red blood cells. RC1A, RC1B, and RC1D calculate the effect of pressures below the level of 80 mmHg, and RC1 the effect of pressures above 80. Blocks RC2, RC2C, and RC2D provide limits to the effects.
    HM5 = sel
      case HM3+HM4 < 0{mmHg}:
        0{mmHg};
      otherwise:
        HM3+HM4;
    endsel;
    // value: RC1, RC1A, RC1B, RC1C, RC1D, RC2, RC2C, and RC2D: Calculation of the effect of atmospheric O2 pressure (PO2AMB) on the driving force (HM7) for production of red blood cells. RC1A, RC1B, and RC1D calculate the effect of pressures below the level of 80 mmHg, and RC1 the effect of pressures above 80. Blocks RC2, RC2C, and RC2D provide limits to the effects.
    HM7 = HM6-HM5;
  enddef;
  // INPUT CONNECTIONS
  def map between oxygen_stimulation and hematocrit_fraction for
    vars HM and HM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between oxygen_stimulation and red_cells_and_viscosity_parameter_values for
    vars PO2AMB and PO2AMB;
    vars HM6 and HM6;
  enddef;
  // ========================================	RED_BLOOD_CELL_PRODUCTION	=============================================

  // value: RC2A, RC2B, and RC2E: Calculation of the rate of red blood cell production (RC1), with a lower limit of zero set by Block RC2E, and the rate of production partly determined by the amount of kidney mass available (REK) to produce erythropoition.
  def comp RBC_production as
    // Inputs from other components
    var HM7: mmHg {priv: none, pub: in};
    // Outputs to other components
    var RC1: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var HM8: L_per_minute_per_mmHg {priv: none, pub: in};
    var REK: dimensionless {priv: none, pub: in};
    // value: RC2A, RC2B, and RC2E: Calculation of the rate of red blood cell production (RC1), with a lower limit of zero set by Block RC2E, and the rate of production partly determined by the amount of kidney mass available (REK) to produce erythropoition.
    RC1 = sel
      case HM7*HM8*REK+0.000005{L_per_minute} < 0{L_per_minute}:
        0{L_per_minute};
      otherwise:
        HM7*HM8*REK+0.000005{L_per_minute};
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between RBC_production and oxygen_stimulation for
    vars HM7 and HM7;
  enddef;
  // PARAMETER CONNECTIONS
  def map between RBC_production and red_cells_and_viscosity_parameter_values for
    vars HM8 and HM8;
    vars REK and REK;
  enddef;
  // ========================================	RED_BLOOD_CELL_DESTRUCTION	=============================================

  // value: RC5: Calculation of the rate of red cell volume destruction (RC2) caused by the presence of an already large red cell volume (VRC). The rate factor for this effect is (RKC). Also increased blood viscosity is considered to cause increased destruction.
  def comp RBC_destruction as
    // Inputs from other components
    var VRC: litre {priv: none, pub: in};
    var VIM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var RC2: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var RKC: per_minute {priv: none, pub: in};
    // value: RC5: Calculation of the rate of red cell volume destruction (RC2) caused by the presence of an already large red cell volume (VRC). The rate factor for this effect is (RKC). Also increased blood viscosity is considered to cause increased destruction.
    RC2 = VRC*RKC*VIM;
  enddef;
  // INPUT CONNECTIONS
  def map between RBC_destruction and RBC_volume for
    vars VRC and VRC;
    vars RC2 and RC2;
  enddef;
  def map between RBC_destruction and blood_viscosity for
    vars VIM and VIM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between RBC_destruction and red_cells_and_viscosity_parameter_values for
    vars RKC and RKC;
  enddef;
  // ========================================	RED_BLOOD_CELL_VOLUME	=============================================

  // value: RC3: Calculation of the rate of change of red blood cell volume (RCD) by adding the rate of RBC production (RC1) and subtracting the rate of destruction (RC2). NB - Parameter TRRBC is not in diagram. RC4: Calculation of the instantaneous volume of red blood cells by integrating the rate of change in total volume of red cells (RCD).
  def comp RBC_volume as
    // Inputs from other components
    var RC1: L_per_minute {priv: none, pub: in};
    var RC2: L_per_minute {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VRC: litre {init: 2.00439, priv: none, pub: out};
    // Parameters from parameter_file
    var TRRBC: L_per_minute {priv: none, pub: in};
    // Internal variables
    var RCD: L_per_minute {priv: none, pub: none};
    // value: RC3: Calculation of the rate of change of red blood cell volume (RCD) by adding the rate of RBC production (RC1) and subtracting the rate of destruction (RC2). NB - Parameter TRRBC is not in diagram.
    RCD = RC1-RC2+TRRBC;
    // value: RC4: Calculation of the instantaneous volume of red blood cells by integrating the rate of change in total volume of red cells (RCD).
    ode(VRC, time) = RCD;
  enddef;
  // INPUT CONNECTIONS
  def map between RBC_volume and RBC_production for
    vars RC1 and RC1;
  enddef;
  def map between RBC_volume and red_cells_and_viscosity for
    vars VRC and VRC;
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between RBC_volume and red_cells_and_viscosity_parameter_values for
    vars TRRBC and TRRBC;
  enddef;
  // ============================================		RED CELLS AND VISCOSITY PARAMETER VALUES	================================================

  def comp red_cells_and_viscosity_parameter_values as
    var HMK: dimensionless {init: 90, priv: none, pub: out};
    // portion of blood viscosity due to red blood cells
    var HKM: dimensionless {init: 0.53333, priv: none, pub: out};
    // blood viscosity factor caused by red blood cells
    var PO2AMB: mmHg {init: 150, priv: none, pub: out};
    // ambiant PO2
    var HM6: mmHg {init: 1850, priv: none, pub: out};
    // erythropoietic limiter [P]
    var HM8: L_per_minute_per_mmHg {init: 4.714e-08, priv: none, pub: out};
    // sensitivity control for erythropoiesis [P]
    var REK: dimensionless {init: 1, priv: none, pub: out};
    // total functional renal mass, ratio to normal [P]
    var RKC: per_minute {init: 5.8e-06, priv: none, pub: out};
    // sensitivity for red blood cell destruction [P]
    var TRRBC: L_per_minute {init: 0, priv: none, pub: out};
    // rate of transfusion of pure RBC
  enddef;
  // ============================================================================================================================================================
  // ========================================================	STRESS RELAXATION MODEL	===========================================================

  // value: Effect of Stress Relaxation on Basic Venous Volume (V0) This section calculates the effect over a period of time caused by excess volume (or too little volume) in the venous tree to cause changes in the volume holding capacity of the venous tree when it is fully filled with blood but at zero pressure. In this model, there are two separate parallel stress relaxations of the veins. One of these has a short time constant (SRK) and the other has a long time constant (SRK2). Encapsulation grouping component containing all the components in the Stress Relaxation Model. The inputs and outputs of the Stress Relaxation Model must be passed by this component.
  def comp stress_relaxation as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var VVE: litre {priv: out, pub: in};
    // Outputs to components in other models
    var VV6: litre {priv: in, pub: out};
    var VV7: litre {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  // <connection>
  // 	<map_components component_1="stress_relaxation" component_2="short_term_stress_relaxation"/>
  // 	<map_variables variable_1="VV7" variable_2="VV7"/>
  // </connection>
  // <connection>
  // 	<map_components component_1="stress_relaxation" component_2="long_term_stress_relaxation"/>
  // 	<map_variables variable_1="VV6" variable_2="VV6"/>
  // </connection>
  // ========================================	SHORT-TERM STRESS RELAXATION	=============================================

  // value: SR1 and SR2: Calculation of the ultimate degree of change in basic venous volume to be caused by the short-term stress relaxation factor with input to the system equal to the instantaneous excess venous volume (VVE); a multiplier factor controls the degree of stress relaxation that will occur (SR). SR3, SR4, and SR5: This is a delay circuit having a short time constant (SRK). The output of this circuit (VV7) approaches the ultimate degree of stress relaxation caused by short-term stress relaxation as calculated from Block SR2. NB - REMOVED THE DAMPING FROM THE INTEGRAL!!!
  def comp short_term_stress_relaxation as
    // Inputs from other components
    var VVE: litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VV7: litre {init: 0.00366525, priv: none, pub: out};
    // Parameters from parameter_file
    var SR: dimensionless {priv: none, pub: in};
    var SRK: minute {priv: none, pub: in};
    // value: SR1 and SR2: Calculation of the ultimate degree of change in basic venous volume to be caused by the short-term stress relaxation factor with input to the system equal to the instantaneous excess venous volume (VVE); a multiplier factor controls the degree of stress relaxation that will occur (SR). SR3, SR4, and SR5: This is a delay circuit having a short time constant (SRK). The output of this circuit (VV7) approaches the ultimate degree of stress relaxation caused by short-term stress relaxation as calculated from Block SR2. NB - REMOVED THE DAMPING FROM THE INTEGRAL!!!
    ode(VV7, time) = ((VVE-0.74{litre})*SR-VV7)/SRK;
  enddef;
  // INPUT CONNECTIONS
  def map between short_term_stress_relaxation and stress_relaxation for
    vars VV7 and VV7;
    vars VVE and VVE;
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between short_term_stress_relaxation and stress_relaxation_parameter_values for
    vars SR and SR;
    vars SRK and SRK;
  enddef;
  // ========================================	LONG-TERM STRESS RELAXATION	=============================================

  // value: SR1A, SR2A, SR3A, AR4A, and SR5A: Similar calculations to the above but this time with a long time constant for stress relaxation (SRK2), and also having a separate variable for control of the ultimate degree of the stress relaxation (SR2). The output of this long time constant stress relaxation (VV6) along with the output from the short time constant stress relaxation (VV7) are subtracted from the actual venous volume (VVS) in Block CD15 in the hemodynamic section of the model.
  def comp long_term_stress_relaxation as
    // Inputs from other components
    var VVE: litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VV6: litre {init: 0.0101913, priv: none, pub: out};
    // Parameters from parameter_file
    var SR2: dimensionless {priv: none, pub: in};
    var SRK2: minute {priv: none, pub: in};
    // value: SR1A, SR2A, SR3A, AR4A, and SR5A: Similar calculations to the above but this time with a long time constant for stress relaxation (SRK2), and also having a separate variable for control of the ultimate degree of the stress relaxation (SR2). The output of this long time constant stress relaxation (VV6) along with the output from the short time constant stress relaxation (VV7) are subtracted from the actual venous volume (VVS) in Block CD15 in the hemodynamic section of the model.
    ode(VV6, time) = ((VVE-0.74{litre})*SR2-VV6)/SRK2;
  enddef;
  // INPUT CONNECTIONS
  def map between long_term_stress_relaxation and stress_relaxation for
    vars VV6 and VV6;
    vars VVE and VVE;
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between long_term_stress_relaxation and stress_relaxation_parameter_values for
    vars SR2 and SR2;
    vars SRK2 and SRK2;
  enddef;
  // =========================================	STRESS RELAXATION PARAMETER VALUES	==================================================

  def comp stress_relaxation_parameter_values as
    var SR: dimensionless {init: 1, priv: none, pub: out};
    // sensitivity controller, short-term stress relaxation [P]
    var SR2: dimensionless {init: 1, priv: none, pub: out};
    // sensitivity controller, long-term stress relaxation [P]
    var SRK: minute {init: 5, priv: none, pub: out};
    // short time constant for stress relaxation [P]
    var SRK2: minute {init: 10000, priv: none, pub: out};
    // long time constant for stress relaxation [P]
  enddef;
  // ============================================================================================================================================================
  // ========================================================	THIRST DRINKING AND SALT APPETITE MODEL	===========================================================

  // value: The salt appetite is considered in this model to be related to the adequacy of body metabolism, as measured by the PO2 level in the non-muscle tissue cells (POT). Also, when the concentration of angiotensin increases (ANM), this, too, increases salt intake. For instance, in circulatory shock, when the adequacy of metabolism falls, the person develops a salt appetite. For lack of information, no control function of salt concentration per se has been assumed, merely that when the body salt falls, circulatory effectiveness falls, angiotensin increases, and a salt appetite develops. Three separate factors are assumed to drive the thirst mechanism, the concentration of antidiuretic hormone, which in turn is driven by changes in electrolyte composition (as detailed in another section) and second, the effect of angiotensin on thirst, and third, the effect of the salt appetite stimulation on thirst. Encapsulation grouping component containing all the components in the Thirst, Drinking and Salt Appetite Model. The inputs and outputs of the Thirst, Drinking and Salt Appetite Model must be passed by this component.
  def comp thirst_drinking_and_salt_appetite as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var ADHC: dimensionless {priv: out, pub: in};
    var ANM: dimensionless {priv: out, pub: in};
    var POT: mmHg {priv: out, pub: in};
    // Outputs to components in other models
    var TVD: L_per_minute {priv: in, pub: out};
    var STH: dimensionless {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  // <connection>
  // 	<map_components component_1="thirst_drinking_and_salt_appetite" component_2="rate_of_fluid_intake"/>
  // 	<map_variables variable_1="TVD" variable_2="TVD"/>
  // </connection>
  // <connection>
  // 	<map_components component_1="thirst_drinking_and_salt_appetite" component_2="effect_of_salt_appetite_stimulation_on_thirst"/>
  // 	<map_variables variable_1="STH" variable_2="STH"/>
  // </connection>
  // ========================================	EFFECT OF SALT APPETITE STIMULATION ON THIRST	=============================================

  // value: TS1, TS1A, TS2, TS2A, TS2B, TS2C, TS3, and TS4: These are curve-fitting blocks to derive a value for salt appetite and for partial control of thirst (STH) based on the input values of PO2 in the non-muscle tissue cells (POT) and the angiotensin multiplier effect (ANM). The constant ANMSLT sets the sensitivity of salt appetite to angiotensin, and the constant Z10 sets the PO2 level below which POT exerts its effects.
  def comp effect_of_salt_appetite_stimulation_on_thirst as
    // Inputs from other components
    var ANM: dimensionless {priv: none, pub: in};
    var POT: mmHg {priv: none, pub: in};
    // Outputs to other components
    var STH: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ANMSLT: dimensionless {priv: none, pub: in};
    var Z10: mmHg {priv: none, pub: in};
    var Z11: per_mmHg2 {priv: none, pub: in};
    // Internal variables
    var ANMSML: dimensionless {priv: none, pub: none};
    var STH1: dimensionless {priv: none, pub: none};
    // value: TS1, TS1A, TS2, TS2A, TS2B, TS2C, TS3, and TS4: These are curve-fitting blocks to derive a value for salt appetite and for partial control of thirst (STH) based on the input values of PO2 in the non-muscle tissue cells (POT) and the angiotensin multiplier effect (ANM). The constant ANMSLT sets the sensitivity of salt appetite to angiotensin, and the constant Z10 sets the PO2 level below which POT exerts its effects.
    ANMSML = (ANM-1{dimensionless})*ANMSLT+1{dimensionless};
    // value: TS1, TS1A, TS2, TS2A, TS2B, TS2C, TS3, and TS4: These are curve-fitting blocks to derive a value for salt appetite and for partial control of thirst (STH) based on the input values of PO2 in the non-muscle tissue cells (POT) and the angiotensin multiplier effect (ANM). The constant ANMSLT sets the sensitivity of salt appetite to angiotensin, and the constant Z10 sets the PO2 level below which POT exerts its effects.
    STH1 = sqr(Z10-POT)*Z11*ANMSML;
    // value: TS1, TS1A, TS2, TS2A, TS2B, TS2C, TS3, and TS4: These are curve-fitting blocks to derive a value for salt appetite and for partial control of thirst (STH) based on the input values of PO2 in the non-muscle tissue cells (POT) and the angiotensin multiplier effect (ANM). The constant ANMSLT sets the sensitivity of salt appetite to angiotensin, and the constant Z10 sets the PO2 level below which POT exerts its effects.
    STH = sel
      case STH1 < 0.8{dimensionless}:
        0.8{dimensionless};
      case STH1 > 8{dimensionless}:
        8{dimensionless};
      otherwise:
        STH1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between effect_of_salt_appetite_stimulation_on_thirst and thirst_drinking_and_salt_appetite for
    vars STH and STH;
    vars ANM and ANM;
    vars POT and POT;
  enddef;
  // PARAMETER CONNECTIONS
  def map between effect_of_salt_appetite_stimulation_on_thirst and thirst_drinking_and_salt_appetite_parameter_values for
    vars ANMSLT and ANMSLT;
    vars Z10 and Z10;
    vars Z11 and Z11;
  enddef;
  // ==============================================	EFFECT OF ANTIDIURETIC HOMONE ON THIRST	===============================================

  // value: TS5, TS6, and TS7: These blocks are a sensitivity controller for calculating a multiplier effect of antidiuretic hormone on thirst (AHCM) from an antidiuretic hormone concentration factor in the circulating body fluids (ADHC). The sensitivity is controlled by the control factor (AHTHM).
  def comp effect_of_antidiuretic_hormone_on_thirst as
    // Inputs from other components
    var ADHC: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AHCM: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var AHTHM: dimensionless {priv: none, pub: in};
    // value: TS5, TS6, and TS7: These blocks are a sensitivity controller for calculating a multiplier effect of antidiuretic hormone on thirst (AHCM) from an antidiuretic hormone concentration factor in the circulating body fluids (ADHC). The sensitivity is controlled by the control factor (AHTHM).
    AHCM = (ADHC-1{dimensionless})*AHTHM+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between effect_of_antidiuretic_hormone_on_thirst and thirst_drinking_and_salt_appetite for
    vars ADHC and ADHC;
  enddef;
  // PARAMETER CONNECTIONS
  def map between effect_of_antidiuretic_hormone_on_thirst and thirst_drinking_and_salt_appetite_parameter_values for
    vars AHTHM and AHTHM;
  enddef;
  // =========================================	EFFECT OF ANGIOTENSIN ON THIRST	  ==============================================================

  // value: TS10 and TS11: Calculation of the drive to stimulate thirst caused by angiotensin (ANMH) from the generalized angiotensin multiplier (ANM). The sensitivity of this calculation is controlled by the angiotensin-thirst sensitivity control variable (ANMTM).
  def comp effect_of_angiotensin_on_thirst as
    // Inputs from other components
    var ANM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ANMTH: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ANMTM: dimensionless {priv: none, pub: in};
    // value: TS10 and TS11: Calculation of the drive to stimulate thirst caused by angiotensin (ANMH) from the generalized angiotensin multiplier (ANM). The sensitivity of this calculation is controlled by the angiotensin-thirst sensitivity control variable (ANMTM).
    ANMTH = (ANM-1{dimensionless})*ANMTM*0.001{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between effect_of_angiotensin_on_thirst and thirst_drinking_and_salt_appetite for
    vars ANM and ANM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between effect_of_angiotensin_on_thirst and thirst_drinking_and_salt_appetite_parameter_values for
    vars ANMTM and ANMTM;
  enddef;
  // ================================================		RATE OF FLUID INTAKE	===============================================================

  // value: TS8 and TS9: Calculation of a thirst drive (AHTH) based on antidiuretic hormone and salt appetite by multiplying three factors, the salt appetite drive (STH), the antidiuretic hormone concentration multiplier (AHCM), and a constant. Block TS9 sets a lower limit to AHTH equal to zero. TS12 and TS13: A temporary calculation for rate of intake of fluid by the body (TVZ) is equal to the drinking drive (AHTH) caused by the product of the salt appetite drive (STH) and the antidiuretic-thirst drive (AHTH), plus the angiotensin-thirst drive (ANMTH). Block TS13 sets the lower limit of (TVZ) to zero. TS14, TS15, and TS16: This is a delay circuit which causes the actual rate of fluid intake (TVD) to be delayed with respect to changes in the temporarily calculated rate of fluid intake (TVZ) by a time constant TVDLL. Also shown in Block TS14 is a variable (DR) that can be used for forced input of water over and above the natural drinking desires; this can be used for intravenous infusion of water as well.
  def comp rate_of_fluid_intake as
    // Inputs from other components
    var STH: dimensionless {priv: none, pub: in};
    var AHCM: dimensionless {priv: none, pub: in};
    var ANMTH: dimensionless {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var TVD: L_per_minute {init: 0.000980838, priv: none, pub: out};
    // Parameters from parameter_file
    var DR: L_per_minute {priv: none, pub: in};
    var TVDDL: minute {priv: none, pub: in};
    // Internal variables
    var AHTH: dimensionless {priv: none, pub: none};
    var AHTH1: dimensionless {priv: none, pub: none};
    var TVZ: L_per_minute {priv: none, pub: none};
    var TVZ1: L_per_minute {priv: none, pub: none};
    // value: TS8: Calculation of a thirst drive (AHTH) based on antidiuretic hormone and salt appetite by multiplying three factors, the salt appetite drive (STH), the antidiuretic hormone concentration multiplier (AHCM), and a constant.
    AHTH1 = AHCM*STH*0.001{dimensionless};
    // value: TS9: Block TS9 sets a lower limit to AHTH equal to zero.
    AHTH = sel
      case AHTH1 < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        AHTH1;
    endsel;
    // value: TS12: A temporary calculation for rate of intake of fluid by the body (TVZ) is equal to the drinking drive (AHTH) caused by the product of the salt appetite drive (STH) and the antidiuretic-thirst drive (AHTH), plus the angiotensin-thirst drive (ANMTH).
    TVZ1 = (ANMTH+AHTH)*1{L_per_minute};
    // value: TS13: Block TS13 sets the lower limit of (TVZ) to zero.
    TVZ = sel
      case TVZ1 < 0{L_per_minute}:
        0{L_per_minute};
      otherwise:
        TVZ1;
    endsel;
    // value: TS14, TS15, and TS16: This is a delay circuit which causes the actual rate of fluid intake (TVD) to be delayed with respect to changes in the temporarily calculated rate of fluid intake (TVZ) by a time constant TVDLL. Also shown in Block TS14 is a variable (DR) that can be used for forced input of water over and above the natural drinking desires; this can be used for intravenous infusion of water as well.
    ode(TVD, time) = (TVZ+DR-TVD)/TVDDL;
  enddef;
  // INPUT CONNECTIONS
  def map between rate_of_fluid_intake and effect_of_antidiuretic_hormone_on_thirst for
    vars AHCM and AHCM;
  enddef;
  def map between rate_of_fluid_intake and effect_of_salt_appetite_stimulation_on_thirst for
    vars STH and STH;
  enddef;
  def map between rate_of_fluid_intake and effect_of_angiotensin_on_thirst for
    vars ANMTH and ANMTH;
  enddef;
  def map between rate_of_fluid_intake and thirst_drinking_and_salt_appetite for
    vars TVD and TVD;
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between rate_of_fluid_intake and thirst_drinking_and_salt_appetite_parameter_values for
    vars DR and DR;
    vars TVDDL and TVDDL;
  enddef;
  // =========================================	THIRST, DRINKING AND SALT APPETITE PARAMETER VALUES		===========================================

  def comp thirst_drinking_and_salt_appetite_parameter_values as
    var Z10: mmHg {init: 45, priv: none, pub: out};
    // damping factor, STH [P]
    var Z11: per_mmHg2 {init: 0.01, priv: none, pub: out};
    // damping factor, STH [P]
    var ANMSLT: dimensionless {init: 2, priv: none, pub: out};
    // sensitivity controller ANMSML [P]
    var AHTHM: dimensionless {init: 2, priv: none, pub: out};
    // sensitivity controller, effect of ADH on thirst [P]
    var ANMTM: dimensionless {init: 1.5, priv: none, pub: out};
    // sensitivity controller of ANMTH [P]
    var DR: L_per_minute {init: 0, priv: none, pub: out};
    // rate of water drinking (in addition of thirst)
    var TVDDL: minute {init: 30, priv: none, pub: out};
    // TVD damping coefficient [P]
  enddef;
  // ============================================================================================================================================================
  // ========================================================	VOLUME RECEPTORS MODEL	===========================================================

  // value: The volume receptor nervous feedback mechanism: The volume receptors are considered to be activated by right atrial pressure (PRA), and feedback is provided to control non-muscle arterial resistance and venous tone. Encapsulation grouping component containing all the components in the Volume Receptors Model. The inputs and outputs of the Volume Receptors Model must be passed by this component.
  def comp volume_receptors as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var PRA: mmHg {priv: out, pub: in};
    // Outputs to components in other models
    var ATRRFB: dimensionless {priv: in, pub: out};
    var ATRVFB: litre {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  def map between volume_receptors and volume_effect_on_arteries for
    vars ATRRFB and ATRRFB;
  enddef;
  def map between volume_receptors and volume_effect_on_unstressed_venous_volume for
    vars ATRVFB and ATRVFB;
  enddef;
  // ========================================	EFFECT OF PRESSURE ON VOLUME RECEPTORS	=============================================

  // value: VR1 and VR2: The function curve in Block VR1 and sensitivity control in VR2 (controlled by variable AH9) provide a relationship between right atrial pressure (PRA) and an intermediate factor (AHZ) that controls the degree of nervous feedback.
  def comp effect_of_pressure_on_volume_receptors as
    // Inputs from other components
    var PRA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var AHZ: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var AH10: dimensionless {priv: none, pub: in};
    var AH9: per_mmHg {priv: none, pub: in};
    // Internal variables
    var AHZ1: dimensionless {priv: none, pub: none};
    // value: VR1 and VR2: The function curve in Block VR1 and sensitivity control in VR2 (controlled by variable AH9) provide a relationship between right atrial pressure (PRA) and an intermediate factor (AHZ) that controls the degree of nervous feedback.
    AHZ1 = pow(abs(PRA), AH10)*AH9;
    // value: VR1 and VR2: The function curve in Block VR1 and sensitivity control in VR2 (controlled by variable AH9) provide a relationship between right atrial pressure (PRA) and an intermediate factor (AHZ) that controls the degree of nervous feedback.
    AHZ = sel
      case PRA < 0{mmHg}:
        -AHZ1;
      otherwise:
        AHZ1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between effect_of_pressure_on_volume_receptors and volume_receptors for
    vars PRA and PRA;
  enddef;
  // PARAMETER CONNECTIONS
  def map between effect_of_pressure_on_volume_receptors and volume_receptors_parameter_values for
    vars AH9 and AH9;
    vars AH10 and AH10;
  enddef;
  // ========================================	TIME-DEPENDENT VOLUME RECEPTOR ADAPTATION	=============================================

  // value: VR3, VR4, and VR5: Series of blocks to provide autoresetting of the volume receptors back toward zero with time. The degree of reset is the variable (AHY), and the time constant for resetting is the variable (AH11).
  def comp time_dependent_volume_receptor_adaptation as
    // Inputs from other components
    var AHZ: dimensionless {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var AHY: dimensionless {init: 0.301963, priv: none, pub: out};
    // Parameters from parameter_file
    var AH11: minute {priv: none, pub: in};
    // value: VR3, VR4, and VR5: Series of blocks to provide autoresetting of the volume receptors back toward zero with time. The degree of reset is the variable (AHY), and the time constant for resetting is the variable (AH11).
    ode(AHY, time) = (AHZ-AHY)/AH11;
  enddef;
  // INPUT CONNECTIONS
  def map between time_dependent_volume_receptor_adaptation and effect_of_pressure_on_volume_receptors for
    vars AHZ and AHZ;
  enddef;
  def map between time_dependent_volume_receptor_adaptation and volume_receptors for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between time_dependent_volume_receptor_adaptation and volume_receptors_parameter_values for
    vars AH11 and AH11;
  enddef;
  // ========================================	TOTAL VOLUME NERVOUS FEEDBACK	=============================================

  // value: VR6: The final degree of effect of the volume nervous feedback mechanism is the output from block VR6 (AH7).
  def comp total_volume_nervous_feedback as
    // Inputs from other components
    var AHZ: dimensionless {priv: none, pub: in};
    var AHY: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AH7: dimensionless {priv: none, pub: out};
    // value: VR6: The final degree of effect of the volume nervous feedback mechanism is the output from block VR6 (AH7).
    AH7 = AHZ-AHY;
  enddef;
  // INPUT CONNECTIONS
  def map between total_volume_nervous_feedback and effect_of_pressure_on_volume_receptors for
    vars AHZ and AHZ;
  enddef;
  def map between total_volume_nervous_feedback and time_dependent_volume_receptor_adaptation for
    vars AHY and AHY;
  enddef;
  // ========================================	VOLUME EFFECT ON ARTERIES	=============================================

  // value: VR7 and VR8: Sensitivity control for the volume receptor nervous feedback effect on the non-muscle arterial resistance. The output multiplier effect for feedback to the arteries is the variable (ATRRFB) and the sensitivity controller is the variable (ATRFBM).
  def comp volume_effect_on_arteries as
    // Inputs from other components
    var AH7: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ATRRFB: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ATRFBM: dimensionless {priv: none, pub: in};
    // value: VR7 and VR8: Sensitivity control for the volume receptor nervous feedback effect on the non-muscle arterial resistance. The output multiplier effect for feedback to the arteries is the variable (ATRRFB) and the sensitivity controller is the variable (ATRFBM).
    ATRRFB = AH7*ATRFBM+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between volume_effect_on_arteries and total_volume_nervous_feedback for
    vars AH7 and AH7;
  enddef;
  // PARAMETER CONNECTIONS
  def map between volume_effect_on_arteries and volume_receptors_parameter_values for
    vars ATRFBM and ATRFBM;
  enddef;
  // ========================================	VOLUME EFFECT ON UNSTRESSED VENOUS VOLUME	=============================================

  // value: VR9: Sensitivity control for volume receptor feedback to the venous system. The output of Block 9 (ATRVFB) controls V0 of the venous tree. The sensitivity controller is the variable (ATRVM).
  def comp volume_effect_on_unstressed_venous_volume as
    // Inputs from other components
    var AH7: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ATRVFB: litre {priv: none, pub: out};
    // Parameters from parameter_file
    var ATRVM: litre {priv: none, pub: in};
    // value: VR9: Sensitivity control for volume receptor feedback to the venous system. The output of Block 9 (ATRVFB) controls V0 of the venous tree. The sensitivity controller is the variable (ATRVM).
    ATRVFB = AH7*ATRVM;
  enddef;
  // INPUT CONNECTIONS
  def map between volume_effect_on_unstressed_venous_volume and total_volume_nervous_feedback for
    vars AH7 and AH7;
  enddef;
  // PARAMETER CONNECTIONS
  def map between volume_effect_on_unstressed_venous_volume and volume_receptors_parameter_values for
    vars ATRVM and ATRVM;
  enddef;
  // ===========================================		VOLUME RECEPTORS PARAMETER VALUES		=================================================

  def comp volume_receptors_parameter_values as
    var AH10: dimensionless {init: 0.333, priv: none, pub: out};
    // curve fitting exponent, right atrial pres. on vol receptors [P]
    var AH11: minute {init: 1000, priv: none, pub: out};
    // time constant, volume receptor adaptation [P]
    var AH9: per_mmHg {init: 1, priv: none, pub: out};
    // sensitivity control of AHZ [P]
    var ATRFBM: dimensionless {init: 0, priv: none, pub: out};
    // sensitivity controller of ATRRFB
    var ATRVM: litre {init: 0, priv: none, pub: out};
    // sensitivity controller of ATRVFB
  enddef;
  // ============================================================================================================================================================
  // ========================================================	KIDNEY MODEL	===========================================================

  // value: FUNCTION OF THE KIDNEY This section is a highly simplified analysis of renal function, including analysis of blood flow through the kidney and of the formation of glomerular filtrate. Then the changes that occur in the filtrate as it passes through the tubules are calculated. However, only four substances are considered as they pass through the tubules: sodium, potassium, urea, and water. The control effects of angiotensin, aldosterone, antidiuretic hormone, and nervous signals are also presented. Encapsulation grouping component containing all the components in the Kidney Model. The inputs and outputs of the Kidney Model must be passed by this component.
  def comp kidney as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var ADHMK: dimensionless {priv: out, pub: in};
    var AMK: dimensionless {priv: out, pub: in};
    var AMNA: dimensionless {priv: out, pub: in};
    var ANM: dimensionless {priv: out, pub: in};
    var ANPX: dimensionless {priv: out, pub: in};
    var AUM: dimensionless {priv: out, pub: in};
    var CKE: monovalent_mEq_per_litre {priv: out, pub: in};
    var CNA: monovalent_mEq_per_litre {priv: out, pub: in};
    var HM1: dimensionless {priv: out, pub: in};
    var MYOGRS: dimensionless {priv: out, pub: in};
    var PA: mmHg {priv: out, pub: in};
    var PAMKRN: dimensionless {priv: out, pub: in};
    var PPC: mmHg {priv: out, pub: in};
    var VTW: litre {priv: out, pub: in};
    // Outputs to components in other models
    var RBF: L_per_minute {priv: in, pub: out};
    var MDFLW: L_per_minute {priv: in, pub: out};
    var NOD: monovalent_mEq_per_minute {priv: in, pub: out};
    var KOD: monovalent_mEq_per_minute {priv: in, pub: out};
    var VUD: L_per_minute {priv: in, pub: out};
  enddef;
  // OUTPUT CONNECTIONS
  def map between kidney and actual_renal_blood_flow for
    vars RBF and RBF;
  enddef;
  def map between kidney and proximal_tubular_and_macula_densa_flow for
    vars MDFLW and MDFLW;
  enddef;
  def map between kidney and actual_Na_excretion_rate for
    vars NOD and NOD;
  enddef;
  def map between kidney and actual_K_excretion_rate for
    vars KOD and KOD;
  enddef;
  def map between kidney and actual_urine_volume for
    vars VUD and VUD;
  enddef;
  // ========================================	PERFUSION PRESSURE	=============================================

  // value: KD1: The perfusion pressure of the kidneys (PAR) is calculated by subtracting any pressure gradient caused by renal arterial constriction (GBL) from the systemic arterial pressure (PA). This block allows one to simulate Goldblatt hypertension. KD2: This block allows one to simulate other experiments. The factor (RAPRSP), when set to any value besides zero, will fix the renal perfusion pressure (PAR) to an exact value that will not change regardless of changes in systemic arterial pressure. The factor (RFCDFT) allows one to test the hypothetical condition that function of the kidney over a long period of time asymptotically approaches normal output function regardless of changes in arterial pressure. That is, PAR drifts continually back toward the normal mean value of 100 rather than being determined by the systemic arterial pressure, simulating shift of the renal function curve. This is used to test theories that in the long run kidney output function can be independent of arterial pressure.
  def comp perfusion_pressure as
    // Inputs from other components
    var PA: mmHg {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var PAR: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var GBL: mmHg {priv: none, pub: in};
    var RAPRSP: mmHg {priv: none, pub: in};
    var RFCDFT: dimensionless {priv: none, pub: in};
    var RCDFPC: dimensionless {priv: none, pub: in};
    var RCDFDP: minute {priv: none, pub: in};
    // Internal variables
    var PAR1: mmHg {init: 103.525, priv: none, pub: none};
    // value: KD2: This block allows one to simulate other experiments. The factor (RAPRSP), when set to any value besides zero, will fix the renal perfusion pressure (PAR) to an exact value that will not change regardless of changes in systemic arterial pressure. The factor (RFCDFT) allows one to test the hypothetical condition that function of the kidney over a long period of time asymptotically approaches normal output function regardless of changes in arterial pressure. That is, PAR drifts continually back toward the normal mean value of 100 rather than being determined by the systemic arterial pressure, simulating shift of the renal function curve. This is used to test theories that in the long run kidney output function can be independent of arterial pressure.
    ode(PAR1, time) = (100{mmHg}+(PA-100{mmHg})*RCDFPC-PAR1)/RCDFDP;
    // value: KD1: The perfusion pressure of the kidneys (PAR) is calculated by subtracting any pressure gradient caused by renal arterial constriction (GBL) from the systemic arterial pressure (PA). This block allows one to simulate Goldblatt hypertension. KD2: This block allows one to simulate other experiments. The factor (RAPRSP), when set to any value besides zero, will fix the renal perfusion pressure (PAR) to an exact value that will not change regardless of changes in systemic arterial pressure. The factor (RFCDFT) allows one to test the hypothetical condition that function of the kidney over a long period of time asymptotically approaches normal output function regardless of changes in arterial pressure. That is, PAR drifts continually back toward the normal mean value of 100 rather than being determined by the systemic arterial pressure, simulating shift of the renal function curve. This is used to test theories that in the long run kidney output function can be independent of arterial pressure.
    PAR = sel
      case (RAPRSP > 0{mmHg}) and (RFCDFT <= 0{dimensionless}):
        RAPRSP;
      case RFCDFT > 0{dimensionless}:
        PAR1;
      otherwise:
        PA-GBL;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between perfusion_pressure and kidney for
    vars PA and PA;
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between perfusion_pressure and kidney_parameter_values for
    vars GBL and GBL;
    vars RAPRSP and RAPRSP;
    vars RFCDFT and RFCDFT;
    vars RCDFPC and RCDFPC;
    vars RCDFDP and RCDFDP;
  enddef;
  // ========================================	RENAL AUTOREGULATORY FEEDBACK FACTOR		=============================================

  // value: KD57, KD58, KD59, KD60, KD61, KD62, KD63, KD64, KD65, KD66, and KD67: Calculation of an autoregulatory feedback factor that affects the degree of constriction of both afferent and efferent arterioles (RNAUG2) which is the output of Block 64. This feedback effect, and the resistance of the afferent and efferent arterioles, increases in proportion to the calculation from these blocks and in response to the flow rate of fluid in the tubules at the macula densa (MDFLW) which is the input to Block 57. Blocks 57, 58, and 59 calculate the sensitivity of this feedback mechanism, and the sensitivity control factor is RNAUGN in Block 58. Blocks 60 and 61 calculate the time constant of development of this feedback in the arterioles after any change in rate of flow (MDFLW) at the macula densa. The time constant of this feedback response is RNAGTC in Block 60. The value RNAULL is the lower limit to the autoregulatory response (RNAUG1) as set by Block 62. RNAUUL is the upper limit, as set by Block 63. Block 65, 66, and 67 calculate obliterative adaptation of this feedback response in case such as this does occur. The sensitivity of this, RNAUAD, in Block 66 is set at zero because many persons believe there is no such decay of this feedback response. Yet others have postulated such a feedback response, in which case RNAUAD would then become the factor that sets the time constant of the loss of the feedback response with time. The output of this total system from Block 14 is RNAUG2. NB - REMOVED DAMPING FROM KD57-KD61!!!!!!!!!
  def comp renal_autoregulatory_feedback_factor as
    // Inputs from other components
    var MDFLW: L_per_minute {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var RNAUG2: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var RNAUGN: minute_per_L {priv: none, pub: in};
    var RNAULL: dimensionless {priv: none, pub: in};
    var RNAUUL: dimensionless {priv: none, pub: in};
    var RNAUAD: per_minute {priv: none, pub: in};
    // Internal variables
    var RNAUG1: dimensionless {priv: none, pub: none};
    var RNAUG1T: dimensionless {priv: none, pub: none};
    var RNAUG3: dimensionless {init: 0.0, priv: none, pub: none};
    // value: KD57, KD58, KD59, KD60 and KD61: Calculation of an autoregulatory feedback factor that affects the degree of constriction of both afferent and efferent arterioles (RNAUG2) which is the output of Block 64. This feedback effect, and the resistance of the afferent and efferent arterioles, increases in proportion to the calculation from these blocks and in response to the flow rate of fluid in the tubules at the macula densa (MDFLW) which is the input to Block 57. Blocks 57, 58, and 59 calculate the sensitivity of this feedback mechanism, and the sensitivity control factor is RNAUGN in Block 58. Blocks 60 and 61 calculate the time constant of development of this feedback in the arterioles after any change in rate of flow (MDFLW) at the macula densa. The time constant of this feedback response is RNAGTC in Block 60.
    RNAUG1T = (MDFLW-1{L_per_minute})*RNAUGN+1{dimensionless};
    // value: KD62 and KD63: The value RNAULL is the lower limit to the autoregulatory response (RNAUG1) as set by Block 62. RNAUUL is the upper limit, as set by Block 63.
    RNAUG1 = sel
      case RNAUG1T < RNAULL:
        RNAULL;
      case RNAUG1T > RNAUUL:
        RNAUUL;
      otherwise:
        RNAUG1T;
    endsel;
    // value: KD64: Calculation of an autoregulatory feedback factor that affects the degree of constriction of both afferent and efferent arterioles (RNAUG2) which is the output of Block 64. This feedback effect, and the resistance of the afferent and efferent arterioles, increases in proportion to the calculation from these blocks and in response to the flow rate of fluid in the tubules at the macula densa (MDFLW) which is the input to Block 57.
    RNAUG2 = RNAUG1-RNAUG3;
    // value: KD65, KD66, and KD67: Block 65, 66, and 67 calculate obliterative adaptation of this feedback response in case such as this does occur. The sensitivity of this, RNAUAD, in Block 66 is set at zero because many persons believe there is no such decay of this feedback response. Yet others have postulated such a feedback response, in which case RNAUAD would then become the factor that sets the time constant of the loss of the feedback response with time. The output of this total system from Block 14 is RNAUG2. NB - REMOVED DAMPING FROM KD57-KD61!!!!!!!!!
    ode(RNAUG3, time) = (RNAUG2-1{dimensionless})*RNAUAD;
  enddef;
  // INPUT CONNECTIONS
  def map between renal_autoregulatory_feedback_factor and proximal_tubular_and_macula_densa_flow for
    vars MDFLW and MDFLW;
  enddef;
  def map between renal_autoregulatory_feedback_factor and kidney for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between renal_autoregulatory_feedback_factor and kidney_parameter_values for
    vars RNAUGN and RNAUGN;
    vars RNAULL and RNAULL;
    vars RNAUUL and RNAUUL;
    vars RNAUAD and RNAUAD;
  enddef;
  // ========================================	AFFERENT ARTERIAL RESISTANCE	=============================================

  // value: Containment grouping component for "autonomic_effect_on_AAR", "angiotensin_effect_on_AAR", "AAR_calculation" and "atrial_natriuretic_peptide_effect_on_AAR".
  def comp afferent_arterial_resistance as
  enddef;
  // ========================================	AUTONOMIC EFFECT ON AFFERENT RESISTANCE	=============================================

  // value: KD10, KD11, KD12, and KD13: Calculation of the effect of autonomic stimulation (AUM) on afferent arteriolar resistance (AUMK). A sensitivity controller for this is in Block 11 (ARF). A limit is in Block 13 equal to 0.8.
  def comp autonomic_effect_on_AAR as
    // Inputs from other components
    var AUM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AUMK: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ARF: dimensionless {priv: none, pub: in};
    // Internal variables
    var AUMKT: dimensionless {priv: none, pub: none};
    // value: KD10, KD11, KD12, and KD13: Calculation of the effect of autonomic stimulation (AUM) on afferent arteriolar resistance (AUMK). A sensitivity controller for this is in Block 11 (ARF). A limit is in Block 13 equal to 0.8.
    AUMKT = (AUM-1{dimensionless})*ARF+1{dimensionless};
    // value: KD10, KD11, KD12, and KD13: Calculation of the effect of autonomic stimulation (AUM) on afferent arteriolar resistance (AUMK). A sensitivity controller for this is in Block 11 (ARF). A limit is in Block 13 equal to 0.8.
    AUMK = sel
      case AUMKT < 0.8{dimensionless}:
        0.8{dimensionless};
      otherwise:
        AUMKT;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between autonomic_effect_on_AAR and kidney for
    vars AUM and AUM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between autonomic_effect_on_AAR and kidney_parameter_values for
    vars ARF and ARF;
  enddef;
  // ========================================	ANGIOTENSIN EFFECT ON AFFERENT RESISTANCE	=============================================

  // value: KD3, KD7 and KD8: Calculation of a temporary value for the effect of angiotensin on the afferent arteriolar resistance (ANMAR). The angiotensin-related factors that affect the afferent arteriolar resistance are an angiotensin multiplier factor (ANM), and an angiotensin multiplier sensitivity controller (ANMAM).
  def comp angiotensin_effect_on_AAR as
    // Inputs from other components
    var ANM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ANMAR: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ANMAM: dimensionless {priv: none, pub: in};
    var ANMARL: dimensionless {priv: none, pub: in};
    // Internal variables
    var ANMAR1: dimensionless {priv: none, pub: none};
    // value: KD3, KD7 and KD8: Calculation of a temporary value for the effect of angiotensin on the afferent arteriolar resistance (ANMAR). The angiotensin-related factors that affect the afferent arteriolar resistance are an angiotensin multiplier factor (ANM), and an angiotensin multiplier sensitivity controller (ANMAM).
    ANMAR1 = (ANM-1{dimensionless})*ANMAM+1{dimensionless};
    // value: KD3, KD7 and KD8: Calculation of a temporary value for the effect of angiotensin on the afferent arteriolar resistance (ANMAR). The angiotensin-related factors that affect the afferent arteriolar resistance are an angiotensin multiplier factor (ANM), and an angiotensin multiplier sensitivity controller (ANMAM).
    ANMAR = sel
      case ANMAR1 < ANMARL:
        ANMARL;
      otherwise:
        ANMAR1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between angiotensin_effect_on_AAR and kidney for
    vars ANM and ANM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between angiotensin_effect_on_AAR and kidney_parameter_values for
    vars ANMAM and ANMAM;
    vars ANMARL and ANMARL;
  enddef;
  // ========================================	AFFERENT ARTERIAL RESISTANCE CALCULATION		=============================================

  // value: KD9: Calculation of a temporary value for the afferent arteriolar resistance (AAR1), except for the effect of atrial natriuretic peptide on this resistance which is calculated later. The factors that affect the afferent arteriolar resistance are the angiotensin multiplier on afferent arterioles (ANMAR), an autonomic multiplier factor for nervous control of afferent resistance (AUMK), an autoregulatory feedback multiplier effect on afferent arteriolar resistance (RNAUG2), a myogenic autoregulation factor (myogrs), and a basic afferent arteriolar resistance factor (AAR1) which allows for intrarenal alterations.
  def comp AAR_calculation as
    // Inputs from other components
    var PAMKRN: dimensionless {priv: none, pub: in};
    var AUMK: dimensionless {priv: none, pub: in};
    var RNAUG2: dimensionless {priv: none, pub: in};
    var ANMAR: dimensionless {priv: none, pub: in};
    var MYOGRS: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AAR1: mmHg_minute_per_L {priv: none, pub: out};
    // Parameters from parameter_file
    var AARK: mmHg_minute_per_L {priv: none, pub: in};
    // value: KD9: Calculation of a temporary value for the afferent arteriolar resistance (AAR1), except for the effect of atrial natriuretic peptide on this resistance which is calculated later. The factors that affect the afferent arteriolar resistance are the angiotensin multiplier on afferent arterioles (ANMAR), an autonomic multiplier factor for nervous control of afferent resistance (AUMK), an autoregulatory feedback multiplier effect on afferent arteriolar resistance (RNAUG2), a myogenic autoregulation factor (myogrs), and a basic afferent arteriolar resistance factor (AAR1) which allows for intrarenal alterations.
    AAR1 = AARK*PAMKRN*AUMK*RNAUG2*ANMAR*40{dimensionless}*MYOGRS;
  enddef;
  // INPUT CONNECTIONS
  def map between AAR_calculation and angiotensin_effect_on_AAR for
    vars ANMAR and ANMAR;
  enddef;
  def map between AAR_calculation and kidney for
    vars MYOGRS and MYOGRS;
    vars PAMKRN and PAMKRN;
  enddef;
  def map between AAR_calculation and renal_autoregulatory_feedback_factor for
    vars RNAUG2 and RNAUG2;
  enddef;
  def map between AAR_calculation and autonomic_effect_on_AAR for
    vars AUMK and AUMK;
  enddef;
  // PARAMETER CONNECTIONS
  def map between AAR_calculation and kidney_parameter_values for
    vars AARK and AARK;
  enddef;
  // ========================================	ATRIAL NATRIURETIC PEPTIDE EFFECT ON AFFERENT RESISTANCE	=============================================

  // value: KD21, KD22, and KD23: Calculation of the effect of circulating atrial natriuretic peptide on afferent arteriolar resistance (AAR). The input to this sequence is ANPX which is derived from the atrial natriuretic peptide section diagram. Sensitivity is determined by ANPXAF, and the lower limit of AAR is set by Block 23 to equal AARLL.
  def comp atrial_natriuretic_peptide_effect_on_AAR as
    // Inputs from other components
    var AAR1: mmHg_minute_per_L {priv: none, pub: in};
    var ANPX: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AAR: mmHg_minute_per_L {priv: none, pub: out};
    // Parameters from parameter_file
    var ANPXAF: mmHg_minute_per_L {priv: none, pub: in};
    var AARLL: mmHg_minute_per_L {priv: none, pub: in};
    // Internal variables
    var AART: mmHg_minute_per_L {priv: none, pub: none};
    // value: KD21 and KD22: Calculation of the effect of circulating atrial natriuretic peptide on afferent arteriolar resistance (AAR). The input to this sequence is ANPX which is derived from the atrial natriuretic peptide section diagram. Sensitivity is determined by ANPXAF.
    AART = AAR1-ANPX*ANPXAF+ANPXAF;
    // value: KD23: The lower limit of AAR is set by Block 23 to equal AARLL.
    AAR = sel
      case AART < AARLL:
        AARLL;
      otherwise:
        AART;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between atrial_natriuretic_peptide_effect_on_AAR and AAR_calculation for
    vars AAR1 and AAR1;
  enddef;
  def map between atrial_natriuretic_peptide_effect_on_AAR and kidney for
    vars ANPX and ANPX;
  enddef;
  // PARAMETER CONNECTIONS
  def map between atrial_natriuretic_peptide_effect_on_AAR and kidney_parameter_values for
    vars ANPXAF and ANPXAF;
    vars AARLL and AARLL;
  enddef;
  // ========================================	EFFERENT ARTERIAL RESISTANCE	=============================================

  // value: Containment grouping component for "autonomic_effect_on_EAR", "angiotensin_effect_on_EAR", "effect_of_renal_autoregulatory_feedback_on_EAR" and "EAR_calculation".
  def comp efferent_arterial_resistance as
  enddef;
  // ========================================	AUTONOMIC EFFECT ON EFFERENT RESISTANCE	=============================================

  // value: KD14, KD15, and KD16: Calculation from AUMK (the output of Block 13), the effect of autonomic stimulation on efferent arteriolar resistance. The output of Block 16 multiplies efferent arteriolar resistance in Block 6.
  def comp autonomic_effect_on_EAR as
    // Inputs from other components
    var AUMK: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AUMK2: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var AUMK1: dimensionless {priv: none, pub: in};
    // value: KD14, KD15, and KD16: Calculation from AUMK (the output of Block 13), the effect of autonomic stimulation on efferent arteriolar resistance. The output of Block 16 multiplies efferent arteriolar resistance in Block 6.
    AUMK2 = (AUMK-1{dimensionless})*AUMK1+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between autonomic_effect_on_EAR and autonomic_effect_on_AAR for
    vars AUMK and AUMK;
  enddef;
  // PARAMETER CONNECTIONS
  def map between autonomic_effect_on_EAR and kidney_parameter_values for
    vars AUMK1 and AUMK1;
  enddef;
  // ========================================	ANGIOTENSIN EFFECT ON EFFERENT RESISTANCE	=============================================

  // value: KD3, KD4 and KD5: Calculation of a temporary value for the effect of angiotensin on the efferent arteriolar resistance (ANMER). The angiotensin-related factors that affect the efferent arteriolar resistance are an angiotensin multiplier (ANM), and a sensitivity control for the effect of angiotensin on the efferent arterioles (ANMEM).
  def comp angiotensin_effect_on_EAR as
    // Inputs from other components
    var ANM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ANMER: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ANMEM: dimensionless {priv: none, pub: in};
    // value: KD3, KD4 and KD5: Calculation of a temporary value for the effect of angiotensin on the efferent arteriolar resistance (ANMER). The angiotensin-related factors that affect the efferent arteriolar resistance are an angiotensin multiplier (ANM), and a sensitivity control for the effect of angiotensin on the efferent arterioles (ANMEM).
    ANMER = (ANM-1{dimensionless})*ANMEM+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between angiotensin_effect_on_EAR and kidney for
    vars ANM and ANM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between angiotensin_effect_on_EAR and kidney_parameter_values for
    vars ANMEM and ANMEM;
  enddef;
  // ==========================	EFFECT OF RENAL AUTOREGULATORY FEEDBACK ON EFFERENT RESISTANCE	===============================

  // value: KD17, KD18, and KD19: Sensitivity control of the renal autoregulatory feedback on efferent arteriolar resistance. The sensitivity is controlled by (EFAFR) in Block 18.
  def comp effect_of_renal_autoregulatory_feedback_on_EAR as
    // Inputs from other components
    var RNAUG2: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var RNAUG4: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var EFAFR: dimensionless {priv: none, pub: in};
    // value: KD17, KD18, and KD19: Sensitivity control of the renal autoregulatory feedback on efferent arteriolar resistance. The sensitivity is controlled by (EFAFR) in Block 18.
    RNAUG4 = (RNAUG2-1{dimensionless})*EFAFR+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between effect_of_renal_autoregulatory_feedback_on_EAR and renal_autoregulatory_feedback_factor for
    vars RNAUG2 and RNAUG2;
  enddef;
  // PARAMETER CONNECTIONS
  def map between effect_of_renal_autoregulatory_feedback_on_EAR and kidney_parameter_values for
    vars EFAFR and EFAFR;
  enddef;
  // ========================================	EFFERENT ARTERIAL RESISTANCE CALCULATION		=============================================

  // value: KD6 and KD6A: Calculation of the efferent arteriolar resistance of the kidneys (EAR). The various factors that affect this are: the angiotensin multiplier on efferent arterioles (ANMER), the basic efferent arteriolar resistance when all other factors are normal (EARK), a multiplier factor from Block KD19 that determines feedback from the renal autoregulatory mechanism, a multiplier factor from Block 16 that determines autonomic nervous signal control of efferent arteriolar resistance, and a factor (MYOGRS) for any myogenic autoregulation that might occur in the efferent arterioles. Block KD6A sets the lower limit for the efferent arteriolar resistance (EAR) at a level equal to the factor (EARLL).
  def comp EAR_calculation as
    // Inputs from other components
    var ANMER: dimensionless {priv: none, pub: in};
    var AUMK2: dimensionless {priv: none, pub: in};
    var MYOGRS: dimensionless {priv: none, pub: in};
    var RNAUG4: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var EAR: mmHg_minute_per_L {priv: none, pub: out};
    // Parameters from parameter_file
    var EARK: mmHg_minute_per_L {priv: none, pub: in};
    var EARLL: mmHg_minute_per_L {priv: none, pub: in};
    // Internal variables
    var EAR1: mmHg_minute_per_L {priv: none, pub: none};
    // value: KD6: Calculation of the efferent arteriolar resistance of the kidneys (EAR). The various factors that affect this are: the angiotensin multiplier on efferent arterioles (ANMER), the basic efferent arteriolar resistance when all other factors are normal (EARK), a multiplier factor from Block KD19 that determines feedback from the renal autoregulatory mechanism, a multiplier factor from Block 16 that determines autonomic nervous signal control of efferent arteriolar resistance, and a factor (MYOGRS) for any myogenic autoregulation that might occur in the efferent arterioles.
    EAR1 = 43.333{dimensionless}*EARK*ANMER*RNAUG4*MYOGRS*AUMK2;
    // value: KD6A: Block KD6A sets the lower limit for the efferent arteriolar resistance (EAR) at a level equal to the factor (EARLL).
    EAR = sel
      case EAR1 < EARLL:
        EARLL;
      otherwise:
        EAR1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between EAR_calculation and angiotensin_effect_on_EAR for
    vars ANMER and ANMER;
  enddef;
  def map between EAR_calculation and autonomic_effect_on_EAR for
    vars AUMK2 and AUMK2;
  enddef;
  def map between EAR_calculation and kidney for
    vars MYOGRS and MYOGRS;
  enddef;
  def map between EAR_calculation and effect_of_renal_autoregulatory_feedback_on_EAR for
    vars RNAUG4 and RNAUG4;
  enddef;
  // PARAMETER CONNECTIONS
  def map between EAR_calculation and kidney_parameter_values for
    vars EARK and EARK;
    vars EARLL and EARLL;
  enddef;
  // ========================================	TOTAL RENAL RESISTANCE	=============================================

  // value: KD20: Calculation of the total renal resistance (RR) by adding efferent arteriolar resistance (EAR) to afferent resistance (AAR).
  def comp total_renal_resistance as
    // Inputs from other components
    var AAR: mmHg_minute_per_L {priv: none, pub: in};
    var EAR: mmHg_minute_per_L {priv: none, pub: in};
    // Outputs to other components
    var RR: mmHg_minute_per_L {priv: none, pub: out};
    // value: KD20: Calculation of the total renal resistance (RR) by adding efferent arteriolar resistance (EAR) to afferent resistance (AAR).
    RR = AAR+EAR;
  enddef;
  // INPUT CONNECTIONS
  def map between total_renal_resistance and EAR_calculation for
    vars EAR and EAR;
  enddef;
  def map between total_renal_resistance and atrial_natriuretic_peptide_effect_on_AAR for
    vars AAR and AAR;
  enddef;
  // ========================================	NORMAL RENAL BLOOD FLOW	=============================================

  // value: KD24A: Renal perfusion pressure (PAR) divided by renal resistance (RR) equals the renal blood flow for normal kidneys (RFN).
  def comp normal_renal_blood_flow as
    // Inputs from other components
    var RR: mmHg_minute_per_L {priv: none, pub: in};
    var PAR: mmHg {priv: none, pub: in};
    // Outputs to other components
    var RFN: L_per_minute {priv: none, pub: out};
    // value: KD24A: Renal perfusion pressure (PAR) divided by renal resistance (RR) equals the renal blood flow for normal kidneys (RFN).
    RFN = PAR/RR;
  enddef;
  // INPUT CONNECTIONS
  def map between normal_renal_blood_flow and total_renal_resistance for
    vars RR and RR;
  enddef;
  def map between normal_renal_blood_flow and perfusion_pressure for
    vars PAR and PAR;
  enddef;
  // ========================================	ACTUAL RENAL BLOOD FLOW	=============================================

  // value: KD73: Calculation of the actual renal blood flow (RBF) by multiplying the normalized renal blood flow (RFN) for two normal kidneys times the fraction of normal kidney mass present in the body (REK).
  def comp actual_renal_blood_flow as
    // Inputs from other components
    var RFN: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var RBF: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var REK: dimensionless {priv: none, pub: in};
    // value: KD73: Calculation of the actual renal blood flow (RBF) by multiplying the normalized renal blood flow (RFN) for two normal kidneys times the fraction of normal kidney mass present in the body (REK).
    RBF = REK*RFN;
  enddef;
  // INPUT CONNECTIONS
  def map between actual_renal_blood_flow and normal_renal_blood_flow for
    vars RFN and RFN;
  enddef;
  // PARAMETER CONNECTIONS
  def map between actual_renal_blood_flow and kidney_parameter_values for
    vars REK and REK;
  enddef;
  // ========================================	GLOMERULAR CAPILLARIES	=============================================

  // value: Containment grouping component for "glomerular_colloid_osmotic_pressure", "glomerular_pressure", "glomerular_filtration_rate".
  def comp glomerular_capillaries as
  enddef;
  // ========================================	GLOMERULAR COLLOID OSMOTIC PRESSURE	=============================================

  // value: KD68, KD69, KD70, KD71, KD71A, KD72, KD72A, and KD72B: Calculation of the colloid osmotic pressure of the proteins in the plasma of the fluid flowing through the glomerular capillaries (GLPC). This calculation is based on four input factors, fractional hematocrit (HM1) in Block 68, normalized rate of blood flow (RFN) in Block 69, normalized rate of flow through the two kidneys (GFN) in Block 70, and plasma protein concentration in the blood elsewhere in the body (PPC) in Block 72A. The output of Block 72A is damped in Block 72B by the damping factor GPPD; this is to prevent oscillation in the feedback circuit. NB - REMOVED DAMPING FROM KD72-KD72B!!!!
  def comp glomerular_colloid_osmotic_pressure as
    // Inputs from other components
    var HM1: dimensionless {priv: none, pub: in};
    var RFN: L_per_minute {priv: none, pub: in};
    var GFN: L_per_minute {priv: none, pub: in};
    var PPC: mmHg {priv: none, pub: in};
    // Outputs to other components
    var GLPC: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var GPPD: dimensionless {priv: none, pub: in};
    var GLPCA: mmHg {priv: none, pub: in};
    // Internal variables
    var EFAFPR: dimensionless {priv: none, pub: none};
    var EFAFPR1: dimensionless {priv: none, pub: none};
    // value: KD68, KD69, KD70, KD71, KD71A, KD72, KD72A, and KD72B: Calculation of the colloid osmotic pressure of the proteins in the plasma of the fluid flowing through the glomerular capillaries (GLPC). This calculation is based on four input factors, fractional hematocrit (HM1) in Block 68, normalized rate of blood flow (RFN) in Block 69, normalized rate of flow through the two kidneys (GFN) in Block 70, and plasma protein concentration in the blood elsewhere in the body (PPC) in Block 72A. The output of Block 72A is damped in Block 72B by the damping factor GPPD; this is to prevent oscillation in the feedback circuit. NB - REMOVED DAMPING FROM KD72-KD72B!!!!
    EFAFPR1 = RFN*(1{dimensionless}-HM1)/(RFN*(1{dimensionless}-HM1)-GFN);
    // value: KD68, KD69, KD70, KD71, KD71A, KD72, KD72A, and KD72B: Calculation of the colloid osmotic pressure of the proteins in the plasma of the fluid flowing through the glomerular capillaries (GLPC). This calculation is based on four input factors, fractional hematocrit (HM1) in Block 68, normalized rate of blood flow (RFN) in Block 69, normalized rate of flow through the two kidneys (GFN) in Block 70, and plasma protein concentration in the blood elsewhere in the body (PPC) in Block 72A. The output of Block 72A is damped in Block 72B by the damping factor GPPD; this is to prevent oscillation in the feedback circuit. NB - REMOVED DAMPING FROM KD72-KD72B!!!!
    EFAFPR = sel
      case EFAFPR1 < 1{dimensionless}:
        1{dimensionless};
      otherwise:
        EFAFPR1;
    endsel;
    // value: KD68, KD69, KD70, KD71, KD71A, KD72, KD72A, and KD72B: Calculation of the colloid osmotic pressure of the proteins in the plasma of the fluid flowing through the glomerular capillaries (GLPC). This calculation is based on four input factors, fractional hematocrit (HM1) in Block 68, normalized rate of blood flow (RFN) in Block 69, normalized rate of flow through the two kidneys (GFN) in Block 70, and plasma protein concentration in the blood elsewhere in the body (PPC) in Block 72A. The output of Block 72A is damped in Block 72B by the damping factor GPPD; this is to prevent oscillation in the feedback circuit. NB - REMOVED DAMPING FROM KD72-KD72B!!!!
    GLPC = sel
      case GLPCA > 0{mmHg}:
        pow(EFAFPR, 1.35{dimensionless})*PPC*0.98{dimensionless};
      otherwise:
        PPC+4{mmHg};
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between glomerular_colloid_osmotic_pressure and kidney for
    vars HM1 and HM1;
    vars PPC and PPC;
  enddef;
  def map between glomerular_colloid_osmotic_pressure and normal_renal_blood_flow for
    vars RFN and RFN;
  enddef;
  def map between glomerular_colloid_osmotic_pressure and glomerular_filtration_rate for
    vars GFN and GFN;
    vars GLPC and GLPC;
  enddef;
  // PARAMETER CONNECTIONS
  def map between glomerular_colloid_osmotic_pressure and kidney_parameter_values for
    vars GPPD and GPPD;
    vars GLPCA and GLPCA;
  enddef;
  // ========================================	GLOMERULAR PRESSURE		=============================================

  // value: KD24: Arterial pressure drop (APD) in the renal arteries and afferent arterioles before the blood gets to the glomerulus equals RFN times efferent arterial resistance (AAR). KD25: Calculation of glomerular pressure (GLP) by subtracting afferent pressure drop (APD) from the input pressure to the kidney (PAR).
  def comp glomerular_pressure as
    // Inputs from other components
    var AAR: mmHg_minute_per_L {priv: none, pub: in};
    var PAR: mmHg {priv: none, pub: in};
    var RFN: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var GLP: mmHg {priv: none, pub: out};
    // Internal variables
    var APD: mmHg {priv: none, pub: none};
    // value: KD24: Arterial pressure drop (APD) in the renal arteries and afferent arterioles before the blood gets to the glomerulus equals RFN times efferent arterial resistance (AAR).
    APD = AAR*RFN;
    // value: KD25: Calculation of glomerular pressure (GLP) by subtracting afferent pressure drop (APD) from the input pressure to the kidney (PAR).
    GLP = PAR-APD;
  enddef;
  // INPUT CONNECTIONS
  def map between glomerular_pressure and atrial_natriuretic_peptide_effect_on_AAR for
    vars AAR and AAR;
  enddef;
  def map between glomerular_pressure and perfusion_pressure for
    vars PAR and PAR;
  enddef;
  def map between glomerular_pressure and normal_renal_blood_flow for
    vars RFN and RFN;
  enddef;
  // ========================================	GLOMERULAR FILTRATION RATE	=============================================

  // value: KD26: Calculation of average filtration pressure through the glomerular capillary walls (PFL) by subtracting intrarenal pressure (PXTP) and colloid osmotic pressure of the glomerular plasma (GLPC) from the average glomerular pressure (GLP). KD27 and KD28: Calculation of the normalized glomerular filtration rate (GFN) if both kidneys are fully functional. This is calculated by multiplying the pressure drop across the glomerular capillary membrane (PFL) times the glomerular filtration coefficient (GFLC). The lower limit for glomerular filtration is set in Block 28 by the value GFNLL. NB - DAMPING REMOVED FROM KD27!!! KD51: Calculation of the actual glomerular filtration rate (GFR) by multiplying the rate that would be true if both kidneys were totally intact (GFN) times the fraction of normal kidney mass actually functioning (REK).
  def comp glomerular_filtration_rate as
    // Inputs from other components
    var GLP: mmHg {priv: none, pub: in};
    var GLPC: mmHg {priv: none, pub: in};
    // Outputs to other components
    var GFN: L_per_minute {priv: none, pub: out};
    var GFR: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var PXTP: mmHg {priv: none, pub: in};
    var GFLC: L_per_minute_per_mmHg {priv: none, pub: in};
    var GFNLL: L_per_minute {priv: none, pub: in};
    var REK: dimensionless {priv: none, pub: in};
    // Internal variables
    var PFL: mmHg {priv: none, pub: none};
    var GFN1: L_per_minute {priv: none, pub: none};
    // value: KD26: Calculation of average filtration pressure through the glomerular capillary walls (PFL) by subtracting intrarenal pressure (PXTP) and colloid osmotic pressure of the glomerular plasma (GLPC) from the average glomerular pressure (GLP).
    PFL = GLP-GLPC-PXTP;
    // value: KD27: Calculation of the normalized glomerular filtration rate (GFN) if both kidneys are fully functional. This is calculated by multiplying the pressure drop across the glomerular capillary membrane (PFL) times the glomerular filtration coefficient (GFLC). NB - DAMPING REMOVED FROM KD27!!!
    GFN1 = PFL*GFLC;
    // value: KD28: The lower limit for glomerular filtration is set in Block 28 by the value GFNLL.
    GFN = sel
      case GFN1 < GFNLL:
        GFNLL;
      otherwise:
        GFN1;
    endsel;
    // value: KD51: Calculation of the actual glomerular filtration rate (GFR) by multiplying the rate that would be true if both kidneys were totally intact (GFN) times the fraction of normal kidney mass actually functioning (REK).
    GFR = GFN*REK;
  enddef;
  // INPUT CONNECTIONS
  def map between glomerular_filtration_rate and glomerular_pressure for
    vars GLP and GLP;
  enddef;
  // PARAMETER CONNECTIONS
  def map between glomerular_filtration_rate and kidney_parameter_values for
    vars PXTP and PXTP;
    vars GFLC and GFLC;
    vars GFNLL and GFNLL;
    vars REK and REK;
  enddef;
  // ========================================	PROXIMAL TUBULAR AND MACULA DENSA FLOW	=============================================

  // value: KD29: Calculation of normalized rate of flow of fluid out of the proximal tubules (PTFL) making the assumption that this is directly proportional to the normalized glomerular filtration rate (GFN). The value (1.0) is considered to be the normal flow of fluid out of the proximal tubules when all functions of the kidneys are normal. KD30, KD31, and KD32: This is a sensitivity controller to determine the normalized rate of flow of tubular fluid at the macula densa level in the kidneys (MDFLW) when the normalized rate of flow out of the proximal tubules (PTFL) changes from the normalized mean value of 1. The multiplier value MDFL1 in Block 31 determines how many times as much the normalized value for macula densa flow (MDFLW) changes with respect to change in proximal tubular outflow (PTFL). KD33: This block sets a lower limit of macula densa flow (MDFLW) equal to zero.
  def comp proximal_tubular_and_macula_densa_flow as
    // Inputs from other components
    var GFN: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var MDFLW: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var MDFL1: dimensionless {priv: none, pub: in};
    // Internal variables
    var PTFL: L_per_minute {priv: none, pub: none};
    var MDFLWT: L_per_minute {priv: none, pub: none};
    // value: KD29: Calculation of normalized rate of flow of fluid out of the proximal tubules (PTFL) making the assumption that this is directly proportional to the normalized glomerular filtration rate (GFN). The value (1.0) is considered to be the normal flow of fluid out of the proximal tubules when all functions of the kidneys are normal.
    PTFL = GFN*8{dimensionless};
    // value: KD30, KD31, and KD32: This is a sensitivity controller to determine the normalized rate of flow of tubular fluid at the macula densa level in the kidneys (MDFLW) when the normalized rate of flow out of the proximal tubules (PTFL) changes from the normalized mean value of 1. The multiplier value MDFL1 in Block 31 determines how many times as much the normalized value for macula densa flow (MDFLW) changes with respect to change in proximal tubular outflow (PTFL).
    MDFLWT = (PTFL-1{L_per_minute})*MDFL1+1{L_per_minute};
    // value: KD33: This block sets a lower limit of macula densa flow (MDFLW) equal to zero.
    MDFLW = sel
      case MDFLWT < 0{L_per_minute}:
        0{L_per_minute};
      otherwise:
        MDFLWT;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between proximal_tubular_and_macula_densa_flow and glomerular_filtration_rate for
    vars GFN and GFN;
  enddef;
  // PARAMETER CONNECTIONS
  def map between proximal_tubular_and_macula_densa_flow and kidney_parameter_values for
    vars MDFL1 and MDFL1;
  enddef;
  // ========================================	RENAL TISSUE OSMOTIC PRESSURE	=============================================

  // value: KD79, KD80, and KD81: Calculation of the renal tissue fluid colloid osmotic pressure (RTSPPC) based on the average colloid osmotic pressure of the plasma in the glomerulus (GLPC) times a factor caused by reabsorption of fluid into the plasma flowing through the capillaries surrounding the tubules (RTPPR), and minus a factor resulting from a protein differential between the capillaries and the tissue spaces (RTPPRS). The lower limit of RTSPPC is set to 1.0 by Block 81.
  def comp renal_tissue_osmotic_pressure as
    // Inputs from other components
    var GLPC: mmHg {priv: none, pub: in};
    // Outputs to other components
    var RTSPPC: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var RTPPR: dimensionless {priv: none, pub: in};
    var RTPPRS: mmHg {priv: none, pub: in};
    // Internal variables
    var RTSPPC1: mmHg {priv: none, pub: none};
    // value: KD79 and KD80: Calculation of the renal tissue fluid colloid osmotic pressure (RTSPPC) based on the average colloid osmotic pressure of the plasma in the glomerulus (GLPC) times a factor caused by reabsorption of fluid into the plasma flowing through the capillaries surrounding the tubules (RTPPR), and minus a factor resulting from a protein differential between the capillaries and the tissue spaces (RTPPRS).
    RTSPPC1 = GLPC*RTPPR-RTPPRS;
    // value: KD81: The lower limit of RTSPPC is set to 1.0 by Block 81.
    RTSPPC = sel
      case RTSPPC1 < 1{mmHg}:
        1{mmHg};
      otherwise:
        RTSPPC1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between renal_tissue_osmotic_pressure and glomerular_colloid_osmotic_pressure for
    vars GLPC and GLPC;
  enddef;
  // PARAMETER CONNECTIONS
  def map between renal_tissue_osmotic_pressure and kidney_parameter_values for
    vars RTPPR and RTPPR;
    vars RTPPRS and RTPPRS;
  enddef;
  // ========================================	UREA HANDLING	=============================================

  // value: Containment grouping component for "plasma_urea_concentration", "glomerular_urea_concentration".
  def comp urea_handling as
  enddef;
  // ========================================	GLOMERULAR UREA CONCENTRATION	=============================================

  // value: KD53 and KD54: Calculation of the concentration of urea in the glomerular filtrate and also in the plasma (PLURC). Subtraction in Block 53 of the urinary output of urea (UROD) from rate of formation of urea in the body (URFORM) and the result integrated in Block 54 calculates the total urea in the plasma and other body fluids (PLUR).
  def comp glomerular_urea_concentration as
    // Inputs from other components
    var UROD: mOsm_per_minute {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var PLUR: mOsm {init: 159.549, priv: none, pub: out};
    // Parameters from parameter_file
    var URFORM: mOsm_per_minute {priv: none, pub: in};
    // value: KD53 and KD54: Calculation of the concentration of urea in the glomerular filtrate and also in the plasma (PLURC). Subtraction in Block 53 of the urinary output of urea (UROD) from rate of formation of urea in the body (URFORM) and the result integrated in Block 54 calculates the total urea in the plasma and other body fluids (PLUR).
    ode(PLUR, time) = URFORM-UROD;
  enddef;
  // INPUT CONNECTIONS
  def map between glomerular_urea_concentration and actual_urea_excretion_rate for
    vars UROD and UROD;
  enddef;
  def map between glomerular_urea_concentration and kidney for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between glomerular_urea_concentration and kidney_parameter_values for
    vars URFORM and URFORM;
  enddef;
  // ========================================	PLASMA UREA CONCENTRATION		=============================================

  // value: KD55: Calculation of the concentration of urea in the glomerular filtrate and also in the plasma (PLURC).
  def comp plasma_urea_concentration as
    // Inputs from other components
    var PLUR: mOsm {priv: none, pub: in};
    var VTW: litre {priv: none, pub: in};
    // Outputs to other components
    var PLURC: mOsm_per_litre {priv: none, pub: out};
    // value: KD55: Calculation of the concentration of urea in the glomerular filtrate and also in the plasma (PLURC).
    PLURC = PLUR/VTW;
  enddef;
  // INPUT CONNECTIONS
  def map between plasma_urea_concentration and glomerular_urea_concentration for
    vars PLUR and PLUR;
  enddef;
  def map between plasma_urea_concentration and kidney for
    vars VTW and VTW;
  enddef;
  // ========================================	RENAL PERITUBULAR CAPILLARIES		=============================================

  // value: Containment grouping component for "peritubular_capillary_pressure" and "peritubular_capillary_reabsorption_factor".
  def comp renal_peritubular_capillaries as
  enddef;
  // ========================================	PERITUBULAR CAPILLARY PRESSURE		=============================================

  // value: KD74, KD75, KD76, and KD77: Calculation of renal peritubular capillary pressure. Blocks KD74, KD75 and KD76 are a sensitivity control to determine the effect of changes in RFN on the calculation. In Block KD77, the output of Block KD76 is multiplied by a resistance from the glomerulus back to the large veins (RVRS).
  def comp peritubular_capillary_pressure as
    // Inputs from other components
    var RFN: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var RCPRS: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var RFABX: dimensionless {priv: none, pub: in};
    var RVRS: mmHg_minute_per_L {priv: none, pub: in};
    // value: KD74, KD75, KD76, and KD77: Calculation of renal peritubular capillary pressure. Blocks KD74, KD75 and KD76 are a sensitivity control to determine the effect of changes in RFN on the calculation. In Block KD77, the output of Block KD76 is multiplied by a resistance from the glomerulus back to the large veins (RVRS).
    RCPRS = ((RFN-1.2{L_per_minute})*RFABX+1.2{L_per_minute})*RVRS;
  enddef;
  // INPUT CONNECTIONS
  def map between peritubular_capillary_pressure and normal_renal_blood_flow for
    vars RFN and RFN;
  enddef;
  // PARAMETER CONNECTIONS
  def map between peritubular_capillary_pressure and kidney_parameter_values for
    vars RFABX and RFABX;
    vars RVRS and RVRS;
  enddef;
  // ========================================	PERITUBULAR CAPILLARY REABSORPTION FACTOR	=============================================

  // value: KD78: The pressure difference for absorption of fluid into the peritubular capillaries (RABSPR) is equal to the average colloid osmotic pressure in the peritubular capillaries (RABSPR), which is equal to the average colloid osmotic pressure in the glomerulus (GLPC), minus renal tissue fluid colloid osmotic pressure (RTSPPC), minus the renal peritubular capillary pressure (RCPRS), and plus the renal tissue fluid pressure (RTSPRS). KD82: A temporary distal tubular reabsorption factor (RFAB1) is calculated from the peritubular capillary absorptive pressure difference (RABSPR) times the renal peritubular capillary reabsorption coefficient (RABSC). KD83: This is a damping circuit to calculate the reabsorption factor (RFAB). The damping coefficient is RFABDP. The purpose of this is to prevent oscillation in the system. NB - REMOVED DAMPING FROM KD83!! KD84, KD85, KD86, and KD87: Blocks 84, 85, and 86 are a sensitivity control for determining the effect of the reabsorption factor RFAB on distal tubule reabsorption (RFABD). The sensitivity is controlled by the factor in Block 85, RFABDM. Block 87 prevents the value of RFABD from falling below a value of .0001.
  def comp peritubular_capillary_reabsorption_factor as
    // Inputs from other components
    var RCPRS: mmHg {priv: none, pub: in};
    var GLPC: mmHg {priv: none, pub: in};
    var RTSPPC: mmHg {priv: none, pub: in};
    // Outputs to other components
    var RFABD: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var RTSPRS: mmHg {priv: none, pub: in};
    var RABSC: per_mmHg {priv: none, pub: in};
    var RFABDP: dimensionless {priv: none, pub: in};
    var RFABDM: dimensionless {priv: none, pub: in};
    // Internal variables
    var RABSPR: mmHg {priv: none, pub: none};
    var RFAB1: dimensionless {priv: none, pub: none};
    var RFAB: dimensionless {priv: none, pub: none};
    var RFABD1: dimensionless {priv: none, pub: none};
    // value: KD78: The pressure difference for absorption of fluid into the peritubular capillaries (RABSPR) is equal to the average colloid osmotic pressure in the peritubular capillaries (RABSPR), which is equal to the average colloid osmotic pressure in the glomerulus (GLPC), minus renal tissue fluid colloid osmotic pressure (RTSPPC), minus the renal peritubular capillary pressure (RCPRS), and plus the renal tissue fluid pressure (RTSPRS).
    RABSPR = GLPC+RTSPRS-RCPRS-RTSPPC;
    // value: KD82: A temporary distal tubular reabsorption factor (RFAB1) is calculated from the peritubular capillary absorptive pressure difference (RABSPR) times the renal peritubular capillary reabsorption coefficient (RABSC).
    RFAB1 = RABSPR*RABSC;
    // value: KD83: This is a damping circuit to calculate the reabsorption factor (RFAB). The damping coefficient is RFABDP. The purpose of this is to prevent oscillation in the system. NB - REMOVED DAMPING FROM KD83!!
    RFAB = RFAB1;
    // value: KD84, KD85, and KD86: Blocks 84, 85, and 86 are a sensitivity control for determining the effect of the reabsorption factor RFAB on distal tubule reabsorption (RFABD). The sensitivity is controlled by the factor in Block 85, RFABDM.
    RFABD1 = (RFAB-1{dimensionless})*RFABDM+1{dimensionless};
    // value: KD87: Block 87 prevents the value of RFABD from falling below a value of .0001.
    RFABD = sel
      case RFABD1 < 0.0001{dimensionless}:
        0.0001{dimensionless};
      otherwise:
        RFABD1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between peritubular_capillary_reabsorption_factor and peritubular_capillary_pressure for
    vars RCPRS and RCPRS;
  enddef;
  def map between peritubular_capillary_reabsorption_factor and glomerular_colloid_osmotic_pressure for
    vars GLPC and GLPC;
  enddef;
  def map between peritubular_capillary_reabsorption_factor and renal_tissue_osmotic_pressure for
    vars RTSPPC and RTSPPC;
  enddef;
  // PARAMETER CONNECTIONS
  def map between peritubular_capillary_reabsorption_factor and kidney_parameter_values for
    vars RTSPRS and RTSPRS;
    vars RABSC and RABSC;
    vars RFABDP and RFABDP;
    vars RFABDM and RFABDM;
  enddef;
  // ========================================	SODIUM AND POTASSIUM HANDLING		=============================================

  // value: Containment grouping component for "distal_tubular_Na_delivery", "Na_reabsorption_into_distal_tubules", "angiotensin_induced_Na_reabsorption_into_distal_tubules", "distal_tubular_K_delivery", "effect_of_physical_forces_on_distal_K_reabsorption", "effect_of_fluid_flow_on_K_reabsorption", "K_reabsorption_into_distal_tubules", "K_secretion_from_distal_tubules".
  def comp sodium_and_potassium_handling as
  enddef;
  // ========================================	DISTAL TUBULAR SODIUM DELIVERY	=============================================

  // value: KD34: Calculation of rate of delivery of sodium into the distal tubular system of two normal kidneys in milliequivalents per minute (DTNAI), which is equal to the normalized delivery of fluid into the distal tubules (MDFLW) times the concentration of sodium in the tubules (CNA), times the factor 0.0061619.
  def comp distal_tubular_Na_delivery as
    // Inputs from other components
    var MDFLW: L_per_minute {priv: none, pub: in};
    var CNA: monovalent_mEq_per_litre {priv: none, pub: in};
    // Outputs to other components
    var DTNAI: monovalent_mEq_per_minute {priv: none, pub: out};
    // value: KD34: Calculation of rate of delivery of sodium into the distal tubular system of two normal kidneys in milliequivalents per minute (DTNAI), which is equal to the normalized delivery of fluid into the distal tubules (MDFLW) times the concentration of sodium in the tubules (CNA), times the factor 0.0061619.
    DTNAI = MDFLW*CNA*0.0061619{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between distal_tubular_Na_delivery and proximal_tubular_and_macula_densa_flow for
    vars MDFLW and MDFLW;
  enddef;
  def map between distal_tubular_Na_delivery and kidney for
    vars CNA and CNA;
  enddef;
  // ========================================	SODIUM REABSORPTION INTO DISTAL TUBULES	=============================================

  // value: KD113, KD114, and KD115: Calculation of the effect of an antidiuretic hormone multiplier constant (ADHMK) on the absorption of sodium by the distal tubular-collecting duct system (output of Block 115). The sensitivity of this ADH effect is adjusted by the sensitivity factor AHMNAR in Block 114. KD36 and KD37: Calculation of the sodium reabsorbed in the distal tubules and collecting duct (DTNARA). The different factors that affect this are the basic value for the normal state (DTNAR), the basic blood capillary hemodynamics of the system (RFABD), the effect of antidiuretic hormone (from Block 115), and the effect of an aldosterone multiplier effect to cause reabsorption of sodium (AMNA) as determined from the output of Block 23 in the aldosterone section of these diagrams. Block 37 sets the lower limit of DTNARA at zero. DIURET allows one to simulate the effect of a diuretic.
  def comp Na_reabsorption_into_distal_tubules as
    // Inputs from other components
    var ADHMK: dimensionless {priv: none, pub: in};
    var AMNA: dimensionless {priv: none, pub: in};
    var RFABD: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var DTNARA: monovalent_mEq_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var DTNAR: monovalent_mEq_per_minute {priv: none, pub: in};
    var DIURET: dimensionless {priv: none, pub: in};
    var AHMNAR: dimensionless {priv: none, pub: in};
    var DTNARL: monovalent_mEq_per_minute {priv: none, pub: in};
    // Internal variables
    var DTNARA1: monovalent_mEq_per_minute {priv: none, pub: none};
    // value: KD113, KD114, and KD115: Calculation of the effect of an antidiuretic hormone multiplier constant (ADHMK) on the absorption of sodium by the distal tubular-collecting duct system (output of Block 115). The sensitivity of this ADH effect is adjusted by the sensitivity factor AHMNAR in Block 114. KD36 and KD37: Calculation of the sodium reabsorbed in the distal tubules and collecting duct (DTNARA). The different factors that affect this are the basic value for the normal state (DTNAR), the basic blood capillary hemodynamics of the system (RFABD), the effect of antidiuretic hormone (from Block 115), and the effect of an aldosterone multiplier effect to cause reabsorption of sodium (AMNA) as determined from the output of Block 23 in the aldosterone section of these diagrams. Block 37 sets the lower limit of DTNARA at zero. DIURET allows one to simulate the effect of a diuretic.
    DTNARA1 = AMNA*RFABD*DTNAR/DIURET*((ADHMK-1{dimensionless})*AHMNAR+1{dimensionless});
    // value: KD36 and KD37: Calculation of the sodium reabsorbed in the distal tubules and collecting duct (DTNARA). The different factors that affect this are the basic value for the normal state (DTNAR), the basic blood capillary hemodynamics of the system (RFABD), the effect of antidiuretic hormone (from Block 115), and the effect of an aldosterone multiplier effect to cause reabsorption of sodium (AMNA) as determined from the output of Block 23 in the aldosterone section of these diagrams. Block 37 sets the lower limit of DTNARA at zero. DIURET allows one to simulate the effect of a diuretic.
    DTNARA = sel
      case DTNARA1 < DTNARL:
        DTNARL;
      otherwise:
        DTNARA1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between Na_reabsorption_into_distal_tubules and kidney for
    vars ADHMK and ADHMK;
    vars AMNA and AMNA;
  enddef;
  def map between Na_reabsorption_into_distal_tubules and peritubular_capillary_reabsorption_factor for
    vars RFABD and RFABD;
  enddef;
  // PARAMETER CONNECTIONS
  def map between Na_reabsorption_into_distal_tubules and kidney_parameter_values for
    vars DTNAR and DTNAR;
    vars DIURET and DIURET;
    vars AHMNAR and AHMNAR;
    vars DTNARL and DTNARL;
  enddef;
  // =========================	ANGIOTENSIN-INDUCED SODIUM REABSORPTION INTO DISTAL TUBULES	==================================

  // value: KD108, KD109, KD110, KD111, and KD112: Calculation of the fraction of the distal tubular reabsorption of sodium that is absorbed each minute that is dependent on the availability of angiotensin (DTNANG). The input factor to this system of blocks, ANM, is the angiotensin multiplier. Blocks 108, 109, and 110 adjust the sensitivity of the effect in accordance with the sensitivity factor ANMNAM. Block 111 converts the output of Block 110 into actual milliequivalents of sodium per minute, and Block 112 places a lower limit on absorption of sodium in response to angiotensin to a level of zero.
  def comp angiotensin_induced_Na_reabsorption_into_distal_tubules as
    // Inputs from other components
    var ANM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var DTNANG: monovalent_mEq_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var ANMNAM: dimensionless {priv: none, pub: in};
    // Internal variables
    var DTNANG1: monovalent_mEq_per_minute {priv: none, pub: none};
    // value: KD108, KD109, KD110 and KD111: Calculation of the fraction of the distal tubular reabsorption of sodium that is absorbed each minute that is dependent on the availability of angiotensin (DTNANG). The input factor to this system of blocks, ANM, is the angiotensin multiplier. Blocks 108, 109, and 110 adjust the sensitivity of the effect in accordance with the sensitivity factor ANMNAM. Block 111 converts the output of Block 110 into actual milliequivalents of sodium per minute.
    DTNANG1 = ((ANM-1{dimensionless})*ANMNAM+1{dimensionless})*0.1{monovalent_mEq_per_minute};
    // value: KD112: Block 112 places a lower limit on absorption of sodium in response to angiotensin to a level of zero.
    DTNANG = sel
      case DTNANG1 < 0{monovalent_mEq_per_minute}:
        0{monovalent_mEq_per_minute};
      otherwise:
        DTNANG1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between angiotensin_induced_Na_reabsorption_into_distal_tubules and kidney for
    vars ANM and ANM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between angiotensin_induced_Na_reabsorption_into_distal_tubules and kidney_parameter_values for
    vars ANMNAM and ANMNAM;
  enddef;
  // ========================================	DISTAL TUBULAR POTASSIUM DELIVERY	=============================================

  // value: KD101 and KD102: Calculation of the rate of entry of potassium into the distal tubular system (DTKI) based on the rate of sodium entry into the system (DTNAI), divided by the concentration of sodium in the extracellular fluid (CNA), and multiplied by the concentration of potassium in the extracellular fluid (CKE).
  def comp distal_tubular_K_delivery as
    // Inputs from other components
    var DTNAI: monovalent_mEq_per_minute {priv: none, pub: in};
    var CNA: monovalent_mEq_per_litre {priv: none, pub: in};
    var CKE: monovalent_mEq_per_litre {priv: none, pub: in};
    // Outputs to other components
    var DTKI: monovalent_mEq_per_minute {priv: none, pub: out};
    // value: KD101 and KD102: Calculation of the rate of entry of potassium into the distal tubular system (DTKI) based on the rate of sodium entry into the system (DTNAI), divided by the concentration of sodium in the extracellular fluid (CNA), and multiplied by the concentration of potassium in the extracellular fluid (CKE).
    DTKI = DTNAI*CKE/CNA;
  enddef;
  // INPUT CONNECTIONS
  def map between distal_tubular_K_delivery and distal_tubular_Na_delivery for
    vars DTNAI and DTNAI;
  enddef;
  def map between distal_tubular_K_delivery and kidney for
    vars CNA and CNA;
    vars CKE and CKE;
  enddef;
  // ========================================	EFFECT OF PHYSICAL FORCES ON DISTAL K REBASORPTION	=============================================

  // value: KD99 and KD100: Calculation of the effect of renal hemodynamics (RFABD) in affecting the rate of reabsorption of potassium by the distal tubule-collecting duct system (RFABK). The intensity of this effect is controlled by factor RFABKM in Block 100.
  def comp effect_of_physical_forces_on_distal_K_reabsorption as
    // Inputs from other components
    var RFABD: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var RFABK: monovalent_mEq_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var RFABKM: monovalent_mEq_per_minute {priv: none, pub: in};
    // value: KD99 and KD100: Calculation of the effect of renal hemodynamics (RFABD) in affecting the rate of reabsorption of potassium by the distal tubule-collecting duct system (RFABK). The intensity of this effect is controlled by factor RFABKM in Block 100.
    RFABK = (RFABD-1{dimensionless})*RFABKM;
  enddef;
  // INPUT CONNECTIONS
  def map between effect_of_physical_forces_on_distal_K_reabsorption and peritubular_capillary_reabsorption_factor for
    vars RFABD and RFABD;
  enddef;
  // PARAMETER CONNECTIONS
  def map between effect_of_physical_forces_on_distal_K_reabsorption and kidney_parameter_values for
    vars RFABKM and RFABKM;
  enddef;
  // ========================================	EFFECT OF FLUID FLOW ON DISTAL K REABSORPTION	=============================================

  // value: KD88, KD89, KD90, and KD90A: Calculation of a multiplier factor for the effect of rate of flow of fluid into the distal tubular system (MDFLW) on the rate of reabsorption of potassium from the distal tubules and collecting ducts (MDFLK). The sensitivity of this control is MDFLKM in Block 89. The lower limit of the output MDFLK is set to .1 by Block 90A.
  def comp effect_of_fluid_flow_on_distal_K_reabsorption as
    // Inputs from other components
    var MDFLW: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var MDFLK: monovalent_mEq_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var MDFLKM: monovalent_mEq_per_litre {priv: none, pub: in};
    // Internal variables
    var MDFLK1: monovalent_mEq_per_minute {priv: none, pub: none};
    // value: KD88, KD89 and KD90: Calculation of a multiplier factor for the effect of rate of flow of fluid into the distal tubular system (MDFLW) on the rate of reabsorption of potassium from the distal tubules and collecting ducts (MDFLK). The sensitivity of this control is MDFLKM in Block 89.
    MDFLK1 = (MDFLW-1{L_per_minute})*MDFLKM+1{monovalent_mEq_per_minute};
    // value: KD90A: The lower limit of the output MDFLK is set to .1 by Block 90A.
    MDFLK = sel
      case MDFLK1 < 0.1{monovalent_mEq_per_minute}:
        0.1{monovalent_mEq_per_minute};
      otherwise:
        MDFLK1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between effect_of_fluid_flow_on_distal_K_reabsorption and proximal_tubular_and_macula_densa_flow for
    vars MDFLW and MDFLW;
  enddef;
  // PARAMETER CONNECTIONS
  def map between effect_of_fluid_flow_on_distal_K_reabsorption and kidney_parameter_values for
    vars MDFLKM and MDFLKM;
  enddef;
  // ========================================	POTASSIUM REABSORPTION INTO DISTAL TUBULES	=============================================

  // value: KD104, KD105, KD106, and KD107: The rate of reabsorption of potassium in the distal tubule-collecting duct system DTKA is proportional to the urinary excretion rate of potassium (KODN) times a proportionality factor, .0004519, and divided by the rate of output of urine from the kidneys (VUDN). Blocks 105, 106, and 107 are a time delay circuit to allow for the time required for this effect to develop. The time delay constant is determined by factor I6 in Block 106.
  def comp K_reabsorption_into_distal_tubules as
    // Inputs from other components
    var KODN: monovalent_mEq_per_minute {priv: none, pub: in};
    var VUDN: L_per_minute {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var DTKA: monovalent_mEq_per_minute {init: 0.0367573, priv: none, pub: out};
    // value: KD104, KD105, KD106, and KD107: The rate of reabsorption of potassium in the distal tubule-collecting duct system DTKA is proportional to the urinary excretion rate of potassium (KODN) times a proportionality factor, .0004519, and divided by the rate of output of urine from the kidneys (VUDN). Blocks 105, 106, and 107 are a time delay circuit to allow for the time required for this effect to develop. The time delay constant is determined by factor I6 in Block 106.
    ode(DTKA, time) = (KODN/VUDN*0.0004518{L_per_minute}-DTKA)*1.0{per_minute};
  enddef;
  // INPUT CONNECTIONS
  def map between K_reabsorption_into_distal_tubules and normal_K_excretion for
    vars KODN and KODN;
    vars DTKA and DTKA;
  enddef;
  def map between K_reabsorption_into_distal_tubules and normal_urine_volume for
    vars VUDN and VUDN;
  enddef;
  def map between K_reabsorption_into_distal_tubules and kidney for
    vars time and time;
  enddef;
  // ========================================	POTASSIUM SECRETION FROM DISTAL TUBULES	=============================================

  // value: KD91, KD92, and KD93: Calculation of a temporary rate of potassium secretion into the distal tubular-collecting tubular system (DTKSC1) based on the concentration of potassium in the plasma (CKE), which is first normalized to the value 1.0 in Block 91, then raised to a power (CKEEX) in Block 92. The result is multiplied by the delivery of potassium into the tubular system at the macula densa level of the distal tubule (MDFLK), and by a multiplier effect depicting the effect of aldosterone on the secretion of potassium by the tubular epithelium into the tubule (AMK). KD94, KD95, KD96, KD97, and KD98: Calculation of the actual rate of secretion of potassium into the distal tubule-collecting duct system (DTKSC) by multiplying the temporary rate of secretion from Block 93 (DTKSC1) times a multiplier factor based on angiotensin concentration in the body fluids (ANMKE). ANMKE is calculated from a generalized body angiotensin multiplier factor (ANM) times a controller for the sensitivity of this effect (ANMKEM). ANMKE is limited to a lowest value by ANMKEL in Block 97.
  def comp K_secretion_from_distal_tubules as
    // Inputs from other components
    var CKE: monovalent_mEq_per_litre {priv: none, pub: in};
    var AMK: dimensionless {priv: none, pub: in};
    var MDFLK: monovalent_mEq_per_minute {priv: none, pub: in};
    var ANM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var DTKSC: monovalent_mEq_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var ANMKEM: dimensionless {priv: none, pub: in};
    var ANMKEL: dimensionless {priv: none, pub: in};
    var CKEEX: dimensionless {priv: none, pub: in};
    // Internal variables
    var ANMKE1: dimensionless {priv: none, pub: none};
    var ANMKE: dimensionless {priv: none, pub: none};
    // value: KD94, KD95 and KD96: Calculation of the actual rate of secretion of potassium into the distal tubule-collecting duct system (DTKSC) by multiplying the temporary rate of secretion from Block 93 (DTKSC1) times a multiplier factor based on angiotensin concentration in the body fluids (ANMKE). ANMKE is calculated from a generalized body angiotensin multiplier factor (ANM) times a controller for the sensitivity of this effect (ANMKEM).
    ANMKE1 = (ANM-1{dimensionless})*ANMKEM+1{dimensionless};
    // value: KD97: ANMKE is limited to a lowest value by ANMKEL in Block 97.
    ANMKE = sel
      case ANMKE1 < ANMKEL:
        ANMKEL;
      otherwise:
        ANMKE1;
    endsel;
    // value: KD91, KD92, and KD93: Calculation of a temporary rate of potassium secretion into the distal tubular-collecting tubular system (DTKSC1) based on the concentration of potassium in the plasma (CKE), which is first normalized to the value 1.0 in Block 91, then raised to a power (CKEEX) in Block 92. The result is multiplied by the delivery of potassium into the tubular system at the macula densa level of the distal tubule (MDFLK), and by a multiplier effect depicting the effect of aldosterone on the secretion of potassium by the tubular epithelium into the tubule (AMK).
    DTKSC = pow(CKE/4.4{monovalent_mEq_per_litre}, CKEEX)*AMK*0.08{dimensionless}*MDFLK/ANMKE;
  enddef;
  // INPUT CONNECTIONS
  def map between K_secretion_from_distal_tubules and kidney for
    vars CKE and CKE;
    vars AMK and AMK;
    vars ANM and ANM;
  enddef;
  def map between K_secretion_from_distal_tubules and effect_of_fluid_flow_on_distal_K_reabsorption for
    vars MDFLK and MDFLK;
  enddef;
  // PARAMETER CONNECTIONS
  def map between K_secretion_from_distal_tubules and kidney_parameter_values for
    vars ANMKEM and ANMKEM;
    vars ANMKEL and ANMKEL;
    vars CKEEX and CKEEX;
  enddef;
  // ========================================	URINARY EXCRETION		=============================================

  // value: Containment grouping component for "normal_Na_excretion", "normal_K_excretion", "normal_urea_excretion", "normal_osmolar_and_water_excretion", "normal_urine_volume", "actual_Na_exretion_rate", "actual_K_excretion_rate", "actual_urea_excretion_rate", "actual_urine_volume".
  def comp urinary_excretion as
  enddef;
  // ========================================	NORMAL SODIUM EXCRETION	=============================================

  // value: KD35: Calculation of the normalized rate of delivery of sodium into the urine (NODN) if both kidneys are intact and normal. This is calculated by subtracting from the rate of entry of sodium into the distal tubular system (DTNAI) the distal tubular and collecting duct reabsorption of sodium caused by the presence of angiotensin in the blood (DTNANG) and that caused by multiple other factors (DTNARA) from Blocks 36 and 37. KD38: This sets a lower limit for the normalized output of sodium (NODN) to zero.
  def comp normal_Na_excretion as
    // Inputs from other components
    var DTNAI: monovalent_mEq_per_minute {priv: none, pub: in};
    var DTNANG: monovalent_mEq_per_minute {priv: none, pub: in};
    var DTNARA: monovalent_mEq_per_minute {priv: none, pub: in};
    // Outputs to other components
    var NODN: monovalent_mEq_per_minute {priv: none, pub: out};
    // Internal variables
    var NODN1: monovalent_mEq_per_minute {priv: none, pub: none};
    // value: KD35: Calculation of the normalized rate of delivery of sodium into the urine (NODN) if both kidneys are intact and normal. This is calculated by subtracting from the rate of entry of sodium into the distal tubular system (DTNAI) the distal tubular and collecting duct reabsorption of sodium caused by the presence of angiotensin in the blood (DTNANG) and that caused by multiple other factors (DTNARA) from Blocks 36 and 37.
    NODN1 = DTNAI-DTNARA-DTNANG;
    // value: KD38: This sets a lower limit for the normalized output of sodium (NODN) to zero.
    NODN = sel
      case NODN1 < 0.00000001{monovalent_mEq_per_minute}:
        0.00000001{monovalent_mEq_per_minute};
      otherwise:
        NODN1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between normal_Na_excretion and distal_tubular_Na_delivery for
    vars DTNAI and DTNAI;
  enddef;
  def map between normal_Na_excretion and angiotensin_induced_Na_reabsorption_into_distal_tubules for
    vars DTNANG and DTNANG;
  enddef;
  def map between normal_Na_excretion and Na_reabsorption_into_distal_tubules for
    vars DTNARA and DTNARA;
  enddef;
  // ========================================	NORMAL POTASSIUM EXCRETION	=============================================

  // value: KD103 and KD103A: The normalized rate of excretion of potassium into the urine by two normal kidneys (KODN) is equal to the rate of entry of potassium into the distal tubular-collecting duct system (DTKI), minus any excess absorption caused by abnormal renal hemodynamics (RFABK), plus the rate of secretion of potassium by the tubular epithelium into the distal tubules and collecting tubules (DTKSC), and minus the rate of absorption of potassium by all portions of the distal tubule-collecting duct system DTKA. Block 103A sets the lower limit of the excretion of potassium in the urine (KODN) at zero.
  def comp normal_K_excretion as
    // Inputs from other components
    var DTKI: monovalent_mEq_per_minute {priv: none, pub: in};
    var RFABK: monovalent_mEq_per_minute {priv: none, pub: in};
    var DTKSC: monovalent_mEq_per_minute {priv: none, pub: in};
    var DTKA: monovalent_mEq_per_minute {priv: none, pub: in};
    // Outputs to other components
    var KODN: monovalent_mEq_per_minute {priv: none, pub: out};
    // Internal variables
    var KODN1: monovalent_mEq_per_minute {priv: none, pub: none};
    // value: KD103: The normalized rate of excretion of potassium into the urine by two normal kidneys (KODN) is equal to the rate of entry of potassium into the distal tubular-collecting duct system (DTKI), minus any excess absorption caused by abnormal renal hemodynamics (RFABK), plus the rate of secretion of potassium by the tubular epithelium into the distal tubules and collecting tubules (DTKSC), and minus the rate of absorption of potassium by all portions of the distal tubule-collecting duct system DTKA.
    KODN1 = DTKI+DTKSC-DTKA-RFABK;
    // value: KD103A: Block 103A sets the lower limit of the excretion of potassium in the urine (KODN) at zero.
    KODN = sel
      case KODN1 < 0{monovalent_mEq_per_minute}:
        0{monovalent_mEq_per_minute};
      otherwise:
        KODN1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between normal_K_excretion and distal_tubular_K_delivery for
    vars DTKI and DTKI;
  enddef;
  def map between normal_K_excretion and effect_of_physical_forces_on_distal_K_reabsorption for
    vars RFABK and RFABK;
  enddef;
  def map between normal_K_excretion and K_secretion_from_distal_tubules for
    vars DTKSC and DTKSC;
  enddef;
  // ========================================	NORMAL UREA EXCRETION		=============================================

  // value: KD52: Calculation of the rate of excretion of urea if both kidneys were functionally intact (DTURI) by multiplying the concentration of urea in the glomerular filtrate (PLURC) times the square of glomerular filtration for the two normal kidneys (GFN) times the numerical factor 3.84.
  def comp normal_urea_excretion as
    // Inputs from other components
    var GFN: L_per_minute {priv: none, pub: in};
    var PLURC: mOsm_per_litre {priv: none, pub: in};
    // Outputs to other components
    var DTURI: mOsm_per_minute {priv: none, pub: out};
    // value: KD52: Calculation of the rate of excretion of urea if both kidneys were functionally intact (DTURI) by multiplying the concentration of urea in the glomerular filtrate (PLURC) times the square of glomerular filtration for the two normal kidneys (GFN) times the numerical factor 3.84.
    DTURI = sqr(GFN)*PLURC*3.84{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between normal_urea_excretion and plasma_urea_concentration for
    vars PLURC and PLURC;
  enddef;
  def map between normal_urea_excretion and glomerular_filtration_rate for
    vars GFN and GFN;
  enddef;
  // ========================================	NORMAL OSMOLAR AND WATER EXCRETION		=============================================

  // value: KD40, KD41, and KD42: Calculation of the normalized output of osmotic substances by the kidneys if both kidneys are functioning totally and normally (OSMOPN) by adding together in Block 40 the milliequivalents of sodium output (NODN) and potassium output (KODN), then multiplying in Block 41 by a factor of 2 to include the anions that go with the sodium and potassium cations, and addition in Block 42 of osmotic excretion in the form of urea (DUTRI).
  def comp normal_osmolar_and_water_excretion as
    // Inputs from other components
    var DTURI: mOsm_per_minute {priv: none, pub: in};
    var NODN: monovalent_mEq_per_minute {priv: none, pub: in};
    var KODN: monovalent_mEq_per_minute {priv: none, pub: in};
    // Outputs to other components
    var OSMOPN1: mOsm_per_minute {priv: none, pub: out};
    var OSMOPN: mOsm_per_minute {priv: none, pub: out};
    // value: KD40, KD41, and KD42: Calculation of the normalized output of osmotic substances by the kidneys if both kidneys are functioning totally and normally (OSMOPN) by adding together in Block 40 the milliequivalents of sodium output (NODN) and potassium output (KODN), then multiplying in Block 41 by a factor of 2 to include the anions that go with the sodium and potassium cations, and addition in Block 42 of osmotic excretion in the form of urea (DUTRI).
    OSMOPN1 = DTURI+2{dimensionless}*(NODN+KODN);
    OSMOPN = sel
      case OSMOPN1 > 0.6{mOsm_per_minute}:
        0.6{mOsm_per_minute};
      otherwise:
        OSMOPN1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between normal_osmolar_and_water_excretion and normal_Na_excretion for
    vars NODN and NODN;
  enddef;
  def map between normal_osmolar_and_water_excretion and normal_K_excretion for
    vars KODN and KODN;
  enddef;
  def map between normal_osmolar_and_water_excretion and normal_urea_excretion for
    vars DTURI and DTURI;
  enddef;
  // ========================================	NORMAL URINE VOLUME	=============================================

  // value: KD43, KD44, KD45, KD46, KD47, and KD48: Calculation of the normalized output of urine volume if both kidneys are totally intact (VUDN) as the output of Block 48. Blocks 43, 45, and 47 calculate the portion of VUDN that is caused by excess of osmotic substances (OSMOP1) over and above the normal amount (OSMOPN). Blocks 44 and 46 calculate the portion of VUDN that is caused by that portion of OSMOPN that is below the normal value of .6. The sensitivity of this portion of urine output varies markedly with the antidiuretic hormone effect on the kidney (ADHMK). Block 48 summates the total VUDN caused by the osmotic substances above the normal level of .6 plus those caused by the osmotic substances below the normal level of .6.
  def comp normal_urine_volume as
    // Inputs from other components
    var OSMOPN: mOsm_per_minute {priv: none, pub: in};
    var OSMOPN1: mOsm_per_minute {priv: none, pub: in};
    var ADHMK: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var VUDN: L_per_minute {priv: none, pub: out};
    // Internal variables
    var OSMOP1T: mOsm_per_minute {priv: none, pub: none};
    var OSMOP1: mOsm_per_minute {priv: none, pub: none};
    // value: KD43, KD44, KD45, KD46, KD47, and KD48: Calculation of the normalized output of urine volume if both kidneys are totally intact (VUDN) as the output of Block 48. Blocks 43, 45, and 47 calculate the portion of VUDN that is caused by excess of osmotic substances (OSMOP1) over and above the normal amount (OSMOPN). Blocks 44 and 46 calculate the portion of VUDN that is caused by that portion of OSMOPN that is below the normal value of .6. The sensitivity of this portion of urine output varies markedly with the antidiuretic hormone effect on the kidney (ADHMK). Block 48 summates the total VUDN caused by the osmotic substances above the normal level of .6 plus those caused by the osmotic substances below the normal level of .6.
    OSMOP1T = OSMOPN1-0.6{mOsm_per_minute};
    // value: KD43, KD44, KD45, KD46, KD47, and KD48: Calculation of the normalized output of urine volume if both kidneys are totally intact (VUDN) as the output of Block 48. Blocks 43, 45, and 47 calculate the portion of VUDN that is caused by excess of osmotic substances (OSMOP1) over and above the normal amount (OSMOPN). Blocks 44 and 46 calculate the portion of VUDN that is caused by that portion of OSMOPN that is below the normal value of .6. The sensitivity of this portion of urine output varies markedly with the antidiuretic hormone effect on the kidney (ADHMK). Block 48 summates the total VUDN caused by the osmotic substances above the normal level of .6 plus those caused by the osmotic substances below the normal level of .6.
    OSMOP1 = sel
      case OSMOP1T < 0{mOsm_per_minute}:
        0{mOsm_per_minute};
      otherwise:
        OSMOP1T;
    endsel;
    // value: KD43, KD44, KD45, KD46, KD47, and KD48: Calculation of the normalized output of urine volume if both kidneys are totally intact (VUDN) as the output of Block 48. Blocks 43, 45, and 47 calculate the portion of VUDN that is caused by excess of osmotic substances (OSMOP1) over and above the normal amount (OSMOPN). Blocks 44 and 46 calculate the portion of VUDN that is caused by that portion of OSMOPN that is below the normal value of .6. The sensitivity of this portion of urine output varies markedly with the antidiuretic hormone effect on the kidney (ADHMK). Block 48 summates the total VUDN caused by the osmotic substances above the normal level of .6 plus those caused by the osmotic substances below the normal level of .6.
    VUDN = OSMOPN/(600{mOsm_per_litre}*ADHMK)+OSMOP1/360{mOsm_per_litre};
  enddef;
  // INPUT CONNECTIONS
  def map between normal_urine_volume and normal_osmolar_and_water_excretion for
    vars OSMOPN1 and OSMOPN1;
    vars OSMOPN and OSMOPN;
  enddef;
  def map between normal_urine_volume and kidney for
    vars ADHMK and ADHMK;
  enddef;
  // ========================================	ACTUAL_SODIUM_EXCRETION_RATE	=============================================

  // value: KD39: Calculation of the actual rate of sodium output from the kidneys (NOD) by multiplying the normalized rate (NODN) times the percentage of normal kidney mass that is present in the body (REK).
  def comp actual_Na_excretion_rate as
    // Inputs from other components
    var NODN: monovalent_mEq_per_minute {priv: none, pub: in};
    // Outputs to other components
    var NOD: monovalent_mEq_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var REK: dimensionless {priv: none, pub: in};
    // value: KD39: Calculation of the actual rate of sodium output from the kidneys (NOD) by multiplying the normalized rate (NODN) times the percentage of normal kidney mass that is present in the body (REK).
    NOD = NODN*REK;
  enddef;
  // INPUT CONNECTIONS
  def map between actual_Na_excretion_rate and normal_Na_excretion for
    vars NODN and NODN;
  enddef;
  // PARAMETER CONNECTIONS
  def map between actual_Na_excretion_rate and kidney_parameter_values for
    vars REK and REK;
  enddef;
  // ========================================	ACTUAL POTASSIUM EXCRETION RATE		=============================================

  // value: KD116: Calculation of the actual rate of potassium output from the kidneys (KOD) by multiplying the normalized rate (KODN) times the percentage of normal kidney mass that is present in the body (REK).
  def comp actual_K_excretion_rate as
    // Inputs from other components
    var KODN: monovalent_mEq_per_minute {priv: none, pub: in};
    // Outputs to other components
    var KOD: monovalent_mEq_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var REK: dimensionless {priv: none, pub: in};
    KOD = KODN*REK;
  enddef;
  // INPUT CONNECTIONS
  def map between actual_K_excretion_rate and normal_K_excretion for
    vars KODN and KODN;
  enddef;
  // PARAMETER CONNECTIONS
  def map between actual_K_excretion_rate and kidney_parameter_values for
    vars REK and REK;
  enddef;
  // ========================================	ACTUAL UREA EXCRETION RATE	=============================================

  // value: KD56: Calculation of rate of excretion of urea per minute in terms of osmoles (UROD), which is equal to the rate of excretion if the kidneys were normal (DTURI) times the actual fraction of normal kidney mass in the body (REK).
  def comp actual_urea_excretion_rate as
    // Inputs from other components
    var DTURI: mOsm_per_minute {priv: none, pub: in};
    // Outputs to other components
    var UROD: mOsm_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var REK: dimensionless {priv: none, pub: in};
    // value: KD56: Calculation of rate of excretion of urea per minute in terms of osmoles (UROD), which is equal to the rate of excretion if the kidneys were normal (DTURI) times the actual fraction of normal kidney mass in the body (REK).
    UROD = DTURI*REK;
  enddef;
  // INPUT CONNECTIONS
  def map between actual_urea_excretion_rate and normal_urea_excretion for
    vars DTURI and DTURI;
  enddef;
  // PARAMETER CONNECTIONS
  def map between actual_urea_excretion_rate and kidney_parameter_values for
    vars REK and REK;
  enddef;
  // ========================================	ACTUAL URINE VOLUME	=============================================

  // value: KD49: Actual rate of urinary output (VUD) calculated from the rate of output if both kidneys were totally intact (VUDN) by multiplying VUDN by the fraction of normal kidney mass that is functional in the body (REK). KD50: A stability test to test whether or not VUD is varying up and down too much and if so making appropriate mathematical corrections. This is simply a mathematical maneuver for allowing more rapid solution of the equations. NB - This stability test has not been coded!!!
  def comp actual_urine_volume as
    // Inputs from other components
    var VUDN: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var VUD: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var REK: dimensionless {priv: none, pub: in};
    // value: KD49: Actual rate of urinary output (VUD) calculated from the rate of output if both kidneys were totally intact (VUDN) by multiplying VUDN by the fraction of normal kidney mass that is functional in the body (REK).
    VUD = VUDN*REK;
    // <apply id="KD50 - STABILITY TEST">
    // </apply>
  enddef;
  // INPUT CONNECTIONS
  def map between actual_urine_volume and normal_urine_volume for
    vars VUDN and VUDN;
  enddef;
  // PARAMETER CONNECTIONS
  def map between actual_urine_volume and kidney_parameter_values for
    vars REK and REK;
  enddef;
  // ===============================================	KIDNEY PARAMETER VALUES	==========================================================

  def comp kidney_parameter_values as
    var GBL: mmHg {init: 0, priv: none, pub: out};
    // Goldblatt pressure clamp (mmHg)
    var RAPRSP: mmHg {init: 0, priv: none, pub: out};
    // overriding value of renal arterial pressure (if > 0) [P]
    var RFCDFT: dimensionless {init: 0, priv: none, pub: out};
    // renal function curve drift factor (if > 0) [P]
    var RCDFDP: minute {init: 2000, priv: none, pub: out};
    // renal function curve drift damping factor [P]
    var RCDFPC: dimensionless {init: 0, priv: none, pub: out};
    // renal function curve drift coefficient [P]
    var RNAUGN: minute_per_L {init: 0.6, priv: none, pub: out};
    // basal renal autoregulation feedback multiplier
    var RNAULL: dimensionless {init: 0.3, priv: none, pub: out};
    // RNAUG1 lower limit
    var RNAUUL: dimensionless {init: 10, priv: none, pub: out};
    // RNAUG1 upper limit
    var RNAGTC: minute {init: 15, priv: none, pub: out};
    // time constant, renal autoregulation feedback [P]
    var RNAUAD: per_minute {init: 0, priv: none, pub: out};
    // renal autoregulation, adaptation controller [P]
    var ARF: dimensionless {init: 0.5, priv: none, pub: out};
    // sensitivity controller of AUMK [P]
    var ANMAM: dimensionless {init: 1.4, priv: none, pub: out};
    // sensitivity effect of angiotensin on afferent arterioles [P]
    var ANMARL: dimensionless {init: 0.86, priv: none, pub: out};
    // ANMAR lower limit [P]
    var AARK: mmHg_minute_per_L {init: 1, priv: none, pub: out};
    // basic afferent arteriolar resistance [P]
    var AARLL: mmHg_minute_per_L {init: 4, priv: none, pub: out};
    // AAR lower limit [P]
    var ANPXAF: mmHg_minute_per_L {init: 1.5, priv: none, pub: out};
    // sensitivity factor of ANP on renal afferent resistance [P]
    var AUMK1: dimensionless {init: 0.3, priv: none, pub: out};
    // autonomic sensitivity controller on EAR [P]
    var ANMEM: dimensionless {init: 1.6, priv: none, pub: out};
    // sensitivity effect of angiotensin on efferent arterioles [P]
    var EFAFR: dimensionless {init: 0, priv: none, pub: out};
    // efferent arteriolar feedback, sensitivity controller [P]
    var EARK: mmHg_minute_per_L {init: 1, priv: none, pub: out};
    // basic efferent arteriolar resistance [P]
    var EARLL: mmHg_minute_per_L {init: 24, priv: none, pub: out};
    // lower limit for EAR [P]
    var REK: dimensionless {init: 1, priv: none, pub: out};
    // total functional renal mass, ratio to normal [P]
    var GPPD: dimensionless {init: 1.0, priv: none, pub: out};
    // damping coefficient GLPC [P]
    var GLPCA: mmHg {init: 1.0, priv: none, pub: out};
    // if > 0, activates GLPC comput. due to filtration fraction
    var PXTP: mmHg {init: 8, priv: none, pub: out};
    // proximal tubular hydrostatic pressure [P]
    var GFLC: L_per_minute_per_mmHg {init: 0.0208333, priv: none, pub: out};
    // glomerular filtration coefficient [P]
    var GFNLL: L_per_minute {init: 0.001, priv: none, pub: out};
    // GFN lower limit [P]
    var GFNDMP: dimensionless {init: 3, priv: none, pub: out};
    // GFN damping coefficient [P]
    var URFORM: mOsm_per_minute {init: 0.24, priv: none, pub: out};
    // rate of urea formation
    var MDFL1: dimensionless {init: 10, priv: none, pub: out};
    // sensitivity controller of MDFLW [P]
    var RTPPR: dimensionless {init: 0.9, priv: none, pub: out};
    // renal oncotic, internal var [P]
    var RTPPRS: mmHg {init: 15.2, priv: none, pub: out};
    // renal oncotic, internal var [P]
    var RTSPRS: mmHg {init: 6, priv: none, pub: out};
    // renal tissue fluid pressure [P]
    var MDFLKM: monovalent_mEq_per_litre {init: 0.667, priv: none, pub: out};
    // sensitivity controller of MDFLK [P]
    var ANMKEM: dimensionless {init: 2, priv: none, pub: out};
    // sensitivity controller of ANMKE [P]
    var RVRS: mmHg_minute_per_L {init: 19.167, priv: none, pub: out};
    // curve fitting coefficient, RCPRS [P]
    var RFABX: dimensionless {init: 0.8, priv: none, pub: out};
    var RABSC: per_mmHg {init: 0.5, priv: none, pub: out};
    // peritubular capillary reabsorption coefficient [P]
    var RFABDP: dimensionless {init: 1, priv: none, pub: out};
    // RFAB damping factor [P]
    var RFABDM: dimensionless {init: 0.3, priv: none, pub: out};
    // sensitivity controller of RFABD [P]
    var DTNAR: monovalent_mEq_per_minute {init: 0.675, priv: none, pub: out};
    // sensitivity controller of DTNARA [P]
    var DTNARL: monovalent_mEq_per_minute {init: 1e-06, priv: none, pub: out};
    // lower limiter of DTNARA [P]
    var DIURET: dimensionless {init: 1, priv: none, pub: out};
    // diuretic effect on tubular reabsorption [P]
    var AHMNAR: dimensionless {init: 0.3, priv: none, pub: out};
    // sensitivity control, renal effect of ADHMK [P]
    var ANMNAM: dimensionless {init: 1, priv: none, pub: out};
    // sensitivity controller of DTNANG [P]
    var RFABKM: monovalent_mEq_per_minute {init: 0.03, priv: none, pub: out};
    // proportionality constant, RFABK [P]
    var ANMKEL: dimensionless {init: 0.3, priv: none, pub: out};
    // ANMKE lower limit [P]
    var CKEEX: dimensionless {init: 4, priv: none, pub: out};
    // curve fitting exponent, distal potassium reabsorption [P]
  enddef;
  // ============================================================================================================================================================
  // ============================================================		GROUPING		===============================================================

  def group as containment for
    comp aldosterone incl
      comp angiotensin_control_of_aldosterone_secretion;
      comp osmotic_control_of_aldosterone_secretion;
      comp aldosterone_secretion;
      comp aldosterone_concentration;
      comp general_aldosterone_multiplier;
      comp aldosterone_effect_on_cell_membrane_K_transport;
      comp aldosterone_effect_on_cell_membrane_Na_transport;
    endcomp;
    comp angiotensin incl
      comp instantaneous_angiotensin_formation;
      comp time_delayed_angiotensin_formation;
      comp total_angiotensin_formation;
      comp artificial_angiotensin_formation;
      comp angiotensin_concentration;
      comp general_angiotensin_multiplier;
      comp angiotensin_effect_on_circulation;
      comp angiotensin_effect_on_venous_constriction;
    endcomp;
    comp antidiuretic_hormone incl
      comp osmotic_control_of_ADH_secretion;
      comp pressure_control_of_ADH_secretion;
      comp total_ADH_secretion;
      comp ADH_in_blood;
      comp ADH_effect_on_nonrenal_vascular_resistance;
      comp ADH_effect_on_kidney;
    endcomp;
    comp atrial_natriuretic_peptide incl
      comp total_ANP_secreted;
      comp ANP_into_circulation;
      comp ANP_in_plasma;
      comp ANP_effect_on_renal_afferent_arteriolar_resistance;
    endcomp;
    comp autonomics incl
      comp pressure_driving_autonomic_receptors;
      comp chemoreceptors_effect_of_PA;
      comp chemoreceptors_effect_of_art_PO2;
      comp arterial_baroreceptor_reflex;
      comp CNS_ischemic_reflex;
      comp autonomic_response_to_vasculature_pressure;
      comp autonomic_response_to_exercise;
      comp total_autonomic_stimulation;
      comp actual_autonomic_stimulation;
      comp autonomic_drive_on_target_organs_and_tissues;
    endcomp;
    comp capillary_dynamics incl
      comp capillary_membrane_dynamics incl
        comp capillary_pressure;
        comp rate_of_fluid_out_of_capillaries;
      endcomp;
      comp plasma_volume_and_protein incl
        comp plasma_volume;
        comp plasma_protein_concentration;
        comp protein_destruction_and_formation;
        comp plasma_leakage;
        comp protein_influx_into_interstitium;
        comp total_plasma_protein;
        comp plasma_colloid_osmotic_pressure;
      endcomp;
      comp systemic_tissue_fluid_volume_and_protein incl
        comp total_systemic_fluid_volume;
        comp interstitial_fluid_volume;
        comp total_interstitial_protein;
        comp interstitial_protein_concentration;
        comp interstitial_colloid_osmotic_pressure;
        comp lymph_protein_flow;
      endcomp;
      comp tissue_gel_and_fluid_and_lymph_flow incl
        comp hydrostatic_pressure_of_tissue_gel;
        comp total_osmotic_pressure_of_tissue_gel;
        comp total_tissue_pressure;
        comp interstial_free_fluid_pressure;
        comp interstitial_solid_tissue_pressure;
        comp lymph_flow;
        comp interstitial_gel_volume;
        comp interstitial_free_fluid_volume;
      endcomp;
    endcomp;
    comp circulatory_dynamics incl
      comp total_blood_volume_change;
      comp right_atrium incl
        comp right_atrial_blood_volume;
        comp right_atrial_pressure;
        comp autonomic_stimulation_effect_on_right_atrial_pressure;
      endcomp;
      comp right_ventricle incl
        comp pressure_effect_on_right_ventricular_pumping;
        comp pumping_effectiveness_of_right_ventricle;
        comp right_ventricular_output;
      endcomp;
      comp pulmonary_vasculature incl
        comp pulmonary_vasculature_blood_volume;
        comp pulmonary_vasculature_pressure;
        comp pulmonary_arterial_resistance;
        comp pulmonary_venous_resistance;
        comp total_pulmonary_vascular_resistance;
        comp pressure_gradient_through_the_lungs;
        comp rate_of_blood_flow_from_pulmonary_veins_to_left_atrium;
      endcomp;
      comp left_atrium incl
        comp left_atrial_blood_volume;
        comp left_atrial_pressure;
        comp autonomic_stimulation_effect_on_left_atrial_pressure;
      endcomp;
      comp left_ventricle incl
        comp pumping_effectiveness_of_left_ventricle;
        comp left_ventricular_output;
      endcomp;
      comp systemic_venous_system incl
        comp venous_blood_volume;
        comp angiotensin_induced_venous_constriction;
        comp venous_excess_volume;
        comp venous_average_pressure;
        comp venous_outflow_pressure_into_heart;
        comp resistance_from_veins_to_right_atrium;
        comp rate_of_blood_flow_from_veins_to_right_atrium;
        comp venous_resistance;
        comp NM_NR_venous_resistance;
      endcomp;
      comp systemic_arterial_system incl
        comp arterial_blood_volume;
        comp arterial_pressure_and_pressure_gradient;
        comp pressure_effect_on_arterial_distention;
        comp non_renal_systemic_arterial_resistance_multiplier;
        comp NM_NR_arterial_resistance;
      endcomp;
      comp pressure_gradient_from_arteries_to_veins;
      comp M_systemic_resistance;
      comp total_NM_NR_systemic_resistance;
      comp blood_flow_through_M_tissues;
      comp blood_flow_through_NM_NR_tissues;
      comp blood_flow_through_AV_fistulas;
      comp systemic_blood_flow;
      comp total_peripheral_resistance;
    endcomp;
    comp electrolytes incl
      comp extracellular_Na_concentration;
      comp aldosterone_effect_on_cellular_K_distribution;
      comp extracellular_K_concentration;
      comp intracellular_K_concentration;
      comp intracellular_fluid_volume;
      comp total_body_water;
      comp extracellular_fluid_volume;
    endcomp;
    comp heart_hypertrophy_or_deterioration incl
      comp left_ventricular_hypertrophy;
      comp right_ventricular_hypertrophy;
      comp heart_deterioration;
    endcomp;
    comp heart_rate_and_stroke_volume incl
      comp effect_of_autonomic_stimulation_on_HR;
      comp effect_of_PRA_on_HR;
      comp effect_of_heart_deterioration_on_HR;
      comp heart_rate;
      comp stroke_volume_output;
    endcomp;
    comp muscle_autoregulatory_local_blood_flow_control incl
      comp M_autoregulatory_driving_force;
      comp M_short_term_autoregulation incl
        comp M_ST_sensitivity_control;
        comp M_ST_time_delay_and_limit;
      endcomp;
      comp M_long_term_autoregulation incl
        comp M_LT_sensitivity_control;
        comp M_LT_time_delay;
      endcomp;
      comp global_M_blood_flow_autoregulation_output;
    endcomp;
    comp muscle_O2_delivery incl
      comp M_O2_blood_supply;
      comp M_venous_O2_content;
      comp metabolic_O2_consumption_by_M_tissue;
      comp delivery_of_O2_to_M_tissues;
      comp volume_of_O2_in_M_tissue;
      comp pressure_of_O2_in_M_tissue_cells;
    endcomp;
    comp non_muscle_autoregulatory_local_blood_flow_control incl
      comp NM_autoregulatory_driving_force;
      comp NM_short_term_autoregulation incl
        comp NM_ST_sensitivity_control;
        comp NM_ST_time_delay_and_damping;
      endcomp;
      comp NM_intermediate_autoregulation incl
        comp NM_I_sensitivity_control;
        comp NM_I_time_delay_and_limit;
      endcomp;
      comp NM_long_term_autoregulation incl
        comp NM_LT_sensitivity_control;
        comp NM_LT_time_delay_and_limit;
      endcomp;
      comp total_NM_autoregulation;
      comp global_NM_blood_flow_autoregulation_output;
    endcomp;
    comp non_muscle_O2_delivery incl
      comp NM_O2_blood_supply;
      comp NM_venous_O2_content;
      comp O2_consumption_by_NM_tissue;
      comp delivery_of_O2_to_NM_tissues;
      comp volume_of_O2_in_NM_tissue;
      comp pressure_of_O2_in_NM_tissue_cells;
    endcomp;
    comp pulmonary_fluid_dynamics incl
      comp pulmonary_capillary_pressure;
      comp fluid_filtration_into_pulmonary_interstitium;
      comp pulmonary_interstitial_free_fluid_volume;
      comp pulmonary_interstitial_fluid_pressure;
      comp concentration_of_protein_in_pulmonary_interstitium;
      comp colloid_osmotic_pressure_of_pulmonary_interstitium;
      comp protein_leakage_into_pulmonary_interstitium;
      comp lung_lymphatic_protein_flow;
    endcomp;
    comp pulmonary_O2_uptake incl
      comp total_O2_utilization;
      comp alveolar_ventilation;
      comp alveolar_PO2;
      comp respiratory_O2_diffusion_into_capillaries;
      comp O2_volume_of_arterial_blood;
      comp arterial_PO2;
      comp chemoreceptor_adaptation_of_alveolar_ventilation incl
        comp acute_chemoreceptor_adaptation_of_alveolar_ventilation;
        comp progressive_chemoreceptor_adaptation_of_alveolar_ventilation;
      endcomp;
    endcomp;
    comp red_cells_and_viscosity incl
      comp blood_viscosity_calculations incl
        comp hematocrit_fraction;
        comp viscosity_due_to_RBCs;
        comp blood_viscosity;
      endcomp;
      comp RBC_formation_and_destruction incl
        comp oxygen_stimulation;
        comp RBC_production;
        comp RBC_destruction;
        comp RBC_volume;
      endcomp;
    endcomp;
    comp stress_relaxation incl
      comp short_term_stress_relaxation;
      comp long_term_stress_relaxation;
    endcomp;
    comp thirst_drinking_and_salt_appetite incl
      comp effect_of_salt_appetite_stimulation_on_thirst;
      comp effect_of_antidiuretic_hormone_on_thirst;
      comp effect_of_angiotensin_on_thirst;
      comp rate_of_fluid_intake;
    endcomp;
    comp volume_receptors incl
      comp effect_of_pressure_on_volume_receptors;
      comp time_dependent_volume_receptor_adaptation;
      comp total_volume_nervous_feedback;
      comp volume_effect_on_arteries;
      comp volume_effect_on_unstressed_venous_volume;
    endcomp;
    comp kidney incl
      comp perfusion_pressure;
      comp total_renal_resistance;
      comp normal_renal_blood_flow;
      comp actual_renal_blood_flow;
      comp renal_tissue_osmotic_pressure;
      comp proximal_tubular_and_macula_densa_flow;
      comp renal_autoregulatory_feedback_factor;
      comp afferent_arterial_resistance incl
        comp autonomic_effect_on_AAR;
        comp angiotensin_effect_on_AAR;
        comp AAR_calculation;
        comp atrial_natriuretic_peptide_effect_on_AAR;
      endcomp;
      comp efferent_arterial_resistance incl
        comp autonomic_effect_on_EAR;
        comp angiotensin_effect_on_EAR;
        comp effect_of_renal_autoregulatory_feedback_on_EAR;
        comp EAR_calculation;
      endcomp;
      comp glomerular_capillaries incl
        comp glomerular_colloid_osmotic_pressure;
        comp glomerular_pressure;
        comp glomerular_filtration_rate;
      endcomp;
      comp renal_peritubular_capillaries incl
        comp peritubular_capillary_pressure;
        comp peritubular_capillary_reabsorption_factor;
      endcomp;
      comp sodium_and_potassium_handling incl
        comp distal_tubular_Na_delivery;
        comp Na_reabsorption_into_distal_tubules;
        comp angiotensin_induced_Na_reabsorption_into_distal_tubules;
        comp distal_tubular_K_delivery;
        comp effect_of_physical_forces_on_distal_K_reabsorption;
        comp effect_of_fluid_flow_on_distal_K_reabsorption;
        comp K_reabsorption_into_distal_tubules;
        comp K_secretion_from_distal_tubules;
      endcomp;
      comp urea_handling incl
        comp glomerular_urea_concentration;
        comp plasma_urea_concentration;
      endcomp;
      comp urinary_excretion incl
        comp normal_Na_excretion;
        comp normal_K_excretion;
        comp normal_urea_excretion;
        comp normal_osmolar_and_water_excretion;
        comp normal_urine_volume;
        comp actual_Na_excretion_rate;
        comp actual_K_excretion_rate;
        comp actual_urea_excretion_rate;
        comp actual_urine_volume;
      endcomp;
    endcomp;
  enddef;

  def group as encapsulation for
    comp aldosterone incl
      comp aldosterone_parameter_values;
      comp angiotensin_control_of_aldosterone_secretion;
      comp osmotic_control_of_aldosterone_secretion;
      comp aldosterone_secretion;
      comp aldosterone_concentration;
      comp general_aldosterone_multiplier;
      comp aldosterone_effect_on_cell_membrane_K_transport;
      comp aldosterone_effect_on_cell_membrane_Na_transport;
    endcomp;
    comp angiotensin incl
      comp angiotensin_parameter_values;
      comp instantaneous_angiotensin_formation;
      comp time_delayed_angiotensin_formation;
      comp total_angiotensin_formation;
      comp artificial_angiotensin_formation;
      comp angiotensin_concentration;
      comp general_angiotensin_multiplier;
      comp angiotensin_effect_on_circulation;
      comp angiotensin_effect_on_venous_constriction;
    endcomp;
    comp antidiuretic_hormone incl
      comp antidiuretic_hormone_parameter_values;
      comp osmotic_control_of_ADH_secretion;
      comp pressure_control_of_ADH_secretion;
      comp total_ADH_secretion;
      comp ADH_in_blood;
      comp ADH_effect_on_nonrenal_vascular_resistance;
      comp ADH_effect_on_kidney;
    endcomp;
    comp atrial_natriuretic_peptide incl
      comp atrial_natriuretic_peptide_parameter_values;
      comp total_ANP_secreted;
      comp ANP_into_circulation;
      comp ANP_in_plasma;
      comp ANP_effect_on_renal_afferent_arteriolar_resistance;
    endcomp;
    comp autonomics incl
      comp autonomics_parameter_values;
      comp pressure_driving_autonomic_receptors;
      comp chemoreceptors_effect_of_PA;
      comp chemoreceptors_effect_of_art_PO2;
      comp arterial_baroreceptor_reflex;
      comp CNS_ischemic_reflex;
      comp autonomic_response_to_vasculature_pressure;
      comp autonomic_response_to_exercise;
      comp total_autonomic_stimulation;
      comp actual_autonomic_stimulation;
      comp autonomic_drive_on_target_organs_and_tissues;
    endcomp;
    comp capillary_dynamics incl
      comp capillary_dynamics_parameter_values;
      comp capillary_membrane_dynamics;
      comp capillary_pressure;
      comp rate_of_fluid_out_of_capillaries;
      comp plasma_volume_and_protein;
      comp plasma_volume;
      comp plasma_protein_concentration;
      comp protein_destruction_and_formation;
      comp plasma_leakage;
      comp protein_influx_into_interstitium;
      comp total_plasma_protein;
      comp plasma_colloid_osmotic_pressure;
      comp systemic_tissue_fluid_volume_and_protein;
      comp total_systemic_fluid_volume;
      comp interstitial_fluid_volume;
      comp total_interstitial_protein;
      comp interstitial_protein_concentration;
      comp interstitial_colloid_osmotic_pressure;
      comp lymph_protein_flow;
      comp tissue_gel_and_fluid_and_lymph_flow;
      comp hydrostatic_pressure_of_tissue_gel;
      comp total_osmotic_pressure_of_tissue_gel;
      comp total_tissue_pressure;
      comp interstial_free_fluid_pressure;
      comp interstitial_solid_tissue_pressure;
      comp lymph_flow;
      comp interstitial_gel_volume;
      comp interstitial_free_fluid_volume;
    endcomp;
    comp circulatory_dynamics incl
      comp circulatory_dynamics_parameter_values;
      comp total_blood_volume_change;
      comp right_atrium;
      comp right_atrial_blood_volume;
      comp right_atrial_pressure;
      comp autonomic_stimulation_effect_on_right_atrial_pressure;
      comp right_ventricle;
      comp pressure_effect_on_right_ventricular_pumping;
      comp pumping_effectiveness_of_right_ventricle;
      comp right_ventricular_output;
      comp pulmonary_vasculature;
      comp pulmonary_vasculature_blood_volume;
      comp pulmonary_vasculature_pressure;
      comp pulmonary_arterial_resistance;
      comp pulmonary_venous_resistance;
      comp total_pulmonary_vascular_resistance;
      comp pressure_gradient_through_the_lungs;
      comp rate_of_blood_flow_from_pulmonary_veins_to_left_atrium;
      comp left_atrium;
      comp left_atrial_blood_volume;
      comp left_atrial_pressure;
      comp autonomic_stimulation_effect_on_left_atrial_pressure;
      comp left_ventricle;
      comp pumping_effectiveness_of_left_ventricle;
      comp left_ventricular_output;
      comp systemic_venous_system;
      comp venous_blood_volume;
      comp angiotensin_induced_venous_constriction;
      comp venous_excess_volume;
      comp venous_average_pressure;
      comp venous_outflow_pressure_into_heart;
      comp resistance_from_veins_to_right_atrium;
      comp rate_of_blood_flow_from_veins_to_right_atrium;
      comp venous_resistance;
      comp NM_NR_venous_resistance;
      comp systemic_arterial_system;
      comp arterial_blood_volume;
      comp arterial_pressure_and_pressure_gradient;
      comp pressure_effect_on_arterial_distention;
      comp non_renal_systemic_arterial_resistance_multiplier;
      comp NM_NR_arterial_resistance;
      comp pressure_gradient_from_arteries_to_veins;
      comp M_systemic_resistance;
      comp total_NM_NR_systemic_resistance;
      comp blood_flow_through_M_tissues;
      comp blood_flow_through_NM_NR_tissues;
      comp blood_flow_through_AV_fistulas;
      comp systemic_blood_flow;
      comp total_peripheral_resistance;
    endcomp;
    comp electrolytes incl
      comp electrolytes_parameter_values;
      comp extracellular_Na_concentration;
      comp aldosterone_effect_on_cellular_K_distribution;
      comp extracellular_K_concentration;
      comp intracellular_K_concentration;
      comp intracellular_fluid_volume;
      comp total_body_water;
      comp extracellular_fluid_volume;
    endcomp;
    comp heart_hypertrophy_or_deterioration incl
      comp heart_hypertrophy_or_deterioration_parameter_values;
      comp left_ventricular_hypertrophy;
      comp right_ventricular_hypertrophy;
      comp heart_deterioration;
    endcomp;
    comp heart_rate_and_stroke_volume incl
      comp HR_and_SV_parameter_values;
      comp effect_of_autonomic_stimulation_on_HR;
      comp effect_of_PRA_on_HR;
      comp effect_of_heart_deterioration_on_HR;
      comp heart_rate;
      comp stroke_volume_output;
    endcomp;
    comp muscle_autoregulatory_local_blood_flow_control incl
      comp M_autoregulatory_local_blood_flow_parameter_values;
      comp M_autoregulatory_driving_force;
      comp M_short_term_autoregulation;
      comp M_ST_sensitivity_control;
      comp M_ST_time_delay_and_limit;
      comp M_long_term_autoregulation;
      comp M_LT_sensitivity_control;
      comp M_LT_time_delay;
      comp global_M_blood_flow_autoregulation_output;
    endcomp;
    comp muscle_O2_delivery incl
      comp M_O2_delivery_parameter_values;
      comp M_O2_blood_supply;
      comp M_venous_O2_content;
      comp metabolic_O2_consumption_by_M_tissue;
      comp delivery_of_O2_to_M_tissues;
      comp volume_of_O2_in_M_tissue;
      comp pressure_of_O2_in_M_tissue_cells;
    endcomp;
    comp non_muscle_autoregulatory_local_blood_flow_control incl
      comp NM_autoregulatory_local_blood_flow_parameter_values;
      comp NM_autoregulatory_driving_force;
      comp NM_short_term_autoregulation;
      comp NM_ST_sensitivity_control;
      comp NM_ST_time_delay_and_damping;
      comp NM_intermediate_autoregulation;
      comp NM_I_sensitivity_control;
      comp NM_I_time_delay_and_limit;
      comp NM_long_term_autoregulation;
      comp NM_LT_sensitivity_control;
      comp NM_LT_time_delay_and_limit;
      comp total_NM_autoregulation;
      comp global_NM_blood_flow_autoregulation_output;
    endcomp;
    comp non_muscle_O2_delivery incl
      comp NM_O2_delivery_parameter_values;
      comp NM_O2_blood_supply;
      comp NM_venous_O2_content;
      comp O2_consumption_by_NM_tissue;
      comp delivery_of_O2_to_NM_tissues;
      comp volume_of_O2_in_NM_tissue;
      comp pressure_of_O2_in_NM_tissue_cells;
    endcomp;
    comp pulmonary_fluid_dynamics incl
      comp pulmonary_fluid_dynamics_parameter_values;
      comp pulmonary_capillary_pressure;
      comp fluid_filtration_into_pulmonary_interstitium;
      comp pulmonary_interstitial_free_fluid_volume;
      comp pulmonary_interstitial_fluid_pressure;
      comp concentration_of_protein_in_pulmonary_interstitium;
      comp colloid_osmotic_pressure_of_pulmonary_interstitium;
      comp protein_leakage_into_pulmonary_interstitium;
      comp lung_lymphatic_protein_flow;
    endcomp;
    comp pulmonary_O2_uptake incl
      comp pulmonary_O2_uptake_parameter_values;
      comp total_O2_utilization;
      comp alveolar_ventilation;
      comp alveolar_PO2;
      comp respiratory_O2_diffusion_into_capillaries;
      comp O2_volume_of_arterial_blood;
      comp arterial_PO2;
      comp chemoreceptor_adaptation_of_alveolar_ventilation;
      comp acute_chemoreceptor_adaptation_of_alveolar_ventilation;
      comp progressive_chemoreceptor_adaptation_of_alveolar_ventilation;
    endcomp;
    comp red_cells_and_viscosity incl
      comp red_cells_and_viscosity_parameter_values;
      comp blood_viscosity_calculations;
      comp hematocrit_fraction;
      comp viscosity_due_to_RBCs;
      comp blood_viscosity;
      comp RBC_formation_and_destruction;
      comp oxygen_stimulation;
      comp RBC_production;
      comp RBC_destruction;
      comp RBC_volume;
    endcomp;
    comp stress_relaxation incl
      comp stress_relaxation_parameter_values;
      comp short_term_stress_relaxation;
      comp long_term_stress_relaxation;
    endcomp;
    comp thirst_drinking_and_salt_appetite incl
      comp thirst_drinking_and_salt_appetite_parameter_values;
      comp effect_of_salt_appetite_stimulation_on_thirst;
      comp effect_of_antidiuretic_hormone_on_thirst;
      comp effect_of_angiotensin_on_thirst;
      comp rate_of_fluid_intake;
    endcomp;
    comp volume_receptors incl
      comp volume_receptors_parameter_values;
      comp effect_of_pressure_on_volume_receptors;
      comp time_dependent_volume_receptor_adaptation;
      comp total_volume_nervous_feedback;
      comp volume_effect_on_arteries;
      comp volume_effect_on_unstressed_venous_volume;
    endcomp;
    comp kidney incl
      comp kidney_parameter_values;
      comp perfusion_pressure;
      comp renal_autoregulatory_feedback_factor;
      comp afferent_arterial_resistance;
      comp autonomic_effect_on_AAR;
      comp angiotensin_effect_on_AAR;
      comp AAR_calculation;
      comp atrial_natriuretic_peptide_effect_on_AAR;
      comp efferent_arterial_resistance;
      comp autonomic_effect_on_EAR;
      comp angiotensin_effect_on_EAR;
      comp effect_of_renal_autoregulatory_feedback_on_EAR;
      comp EAR_calculation;
      comp total_renal_resistance;
      comp normal_renal_blood_flow;
      comp actual_renal_blood_flow;
      comp glomerular_capillaries;
      comp glomerular_colloid_osmotic_pressure;
      comp glomerular_pressure;
      comp glomerular_filtration_rate;
      comp glomerular_urea_concentration;
      comp proximal_tubular_and_macula_densa_flow;
      comp renal_tissue_osmotic_pressure;
      comp urea_handling;
      comp plasma_urea_concentration;
      comp renal_peritubular_capillaries;
      comp peritubular_capillary_pressure;
      comp peritubular_capillary_reabsorption_factor;
      comp sodium_and_potassium_handling;
      comp distal_tubular_Na_delivery;
      comp Na_reabsorption_into_distal_tubules;
      comp angiotensin_induced_Na_reabsorption_into_distal_tubules;
      comp distal_tubular_K_delivery;
      comp effect_of_physical_forces_on_distal_K_reabsorption;
      comp effect_of_fluid_flow_on_distal_K_reabsorption;
      comp K_reabsorption_into_distal_tubules;
      comp K_secretion_from_distal_tubules;
      comp urinary_excretion;
      comp normal_Na_excretion;
      comp normal_K_excretion;
      comp normal_urea_excretion;
      comp normal_osmolar_and_water_excretion;
      comp normal_urine_volume;
      comp actual_Na_excretion_rate;
      comp actual_K_excretion_rate;
      comp actual_urea_excretion_rate;
      comp actual_urine_volume;
    endcomp;
  enddef;
  // ********************************************************************************************************************************************
  // ==========================================		CONNECTIONS BETWEEN ALL MODELS		==============================================
  // ALDOSTERONE INPUT CONNECTIONS
  def map between aldosterone and angiotensin for
    vars ANM and ANM;
  enddef;
  def map between aldosterone and environment for
    vars time and time;
  enddef;
  // ANGIOTENSIN INPUT CONNECTIONS
  def map between angiotensin and environment for
    vars time and time;
  enddef;
  // ANTI-DIURETIC HORMONE INPUT CONNECTIONS
  def map between antidiuretic_hormone and electrolytes for
    vars CNA and CNA;
  enddef;
  def map between antidiuretic_hormone and autonomics for
    vars PA1 and PA1;
  enddef;
  def map between antidiuretic_hormone and environment for
    vars time and time;
  enddef;
  // ATRIAL NATRIURETIC PEPTIDE INPUT CONNECTIONS
  def map between atrial_natriuretic_peptide and circulatory_dynamics for
    vars PLA and PLA;
    vars PRA and PRA;
  enddef;
  def map between atrial_natriuretic_peptide and environment for
    vars time and time;
  enddef;
  // AUTONOMICS INPUT CONNECTIONS
  def map between autonomics and circulatory_dynamics for
    vars PA and PA;
    vars PLA and PLA;
    vars PRA and PRA;
    vars PPA and PPA;
    vars AVE and AVE;
    vars VVR and VVR;
    vars AUH and AUH;
    vars AUM and AUM;
    vars AU and AU;
  enddef;
  def map between autonomics and pulmonary_O2_uptake for
    vars PO2ART and PO2ART;
  enddef;
  def map between autonomics and environment for
    vars time and time;
  enddef;
  // CAPILLARY DYNAMICS INPUT CONNECTIONS
  def map between capillary_dynamics and electrolytes for
    vars VEC and VEC;
  enddef;
  def map between capillary_dynamics and environment for
    vars time and time;
  enddef;
  // CIRCULATORY DYNAMICS INPUT CONNECTIONS
  def map between circulatory_dynamics and angiotensin for
    vars ANU and ANU;
    vars ANUVN and ANUVN;
  enddef;
  def map between circulatory_dynamics and antidiuretic_hormone for
    vars ADHMV and ADHMV;
  enddef;
  def map between circulatory_dynamics and temp_myogrs_and_pamk for
    vars PAMK and PAMK;
    vars MYOGRS and MYOGRS;
  enddef;
  def map between circulatory_dynamics and non_muscle_autoregulatory_local_blood_flow_control for
    vars ARM and ARM;
  enddef;
  def map between circulatory_dynamics and red_cells_and_viscosity for
    vars VIM and VIM;
    vars VRC and VRC;
  enddef;
  def map between circulatory_dynamics and volume_receptors for
    vars ATRVFB and ATRVFB;
    vars PRA and PRA;
    vars ATRRFB and ATRRFB;
  enddef;
  def map between circulatory_dynamics and capillary_dynamics for
    vars PC and PC;
    vars VP and VP;
    vars RVS and RVS;
    vars BFN and BFN;
    vars PVS and PVS;
  enddef;
  def map between circulatory_dynamics and heart_hypertrophy_or_deterioration for
    vars HPR and HPR;
    vars HMD and HMD;
    vars HPL and HPL;
    vars QAO and QAO;
    vars PA and PA;
    vars PPA and PPA;
  enddef;
  def map between circulatory_dynamics and pulmonary_O2_uptake for
    vars OSA and OSA;
    vars QRO and QRO;
  enddef;
  def map between circulatory_dynamics and muscle_autoregulatory_local_blood_flow_control for
    vars AMM and AMM;
  enddef;
  def map between circulatory_dynamics and environment for
    vars time and time;
  enddef;
  // ELECTROLYTES INPUT CONNECTIONS
  def map between electrolytes and aldosterone for
    vars AMK and AMK;
    vars CKE and CKE;
  enddef;
  def map between electrolytes and thirst_drinking_and_salt_appetite for
    vars TVD and TVD;
    vars STH and STH;
  enddef;
  def map between electrolytes and environment for
    vars time and time;
  enddef;
  // HEART HYPERTROPHY OR DETERIORATION INPUT CONNECTIONS
  def map between heart_hypertrophy_or_deterioration and non_muscle_O2_delivery for
    vars POT and POT;
  enddef;
  def map between heart_hypertrophy_or_deterioration and environment for
    vars time and time;
  enddef;
  // MUSCLE AUTOREGULATORY LOCAL BLOOD FLOW CONTROL INPUT CONNECTIONS
  def map between muscle_autoregulatory_local_blood_flow_control and muscle_O2_delivery for
    vars PMO and PMO;
  enddef;
  def map between muscle_autoregulatory_local_blood_flow_control and environment for
    vars time and time;
  enddef;
  // MUSCLE O2 DELIVERY INPUT CONNECTIONS
  def map between muscle_O2_delivery and circulatory_dynamics for
    vars BFM and BFM;
  enddef;
  def map between muscle_O2_delivery and pulmonary_O2_uptake for
    vars OVA and OVA;
    vars RMO and RMO;
  enddef;
  def map between muscle_O2_delivery and red_cells_and_viscosity for
    vars HM and HM;
  enddef;
  def map between muscle_O2_delivery and autonomics for
    vars AOM and AOM;
  enddef;
  def map between muscle_O2_delivery and environment for
    vars time and time;
  enddef;
  // NON-MUSCLE AUTOREGULATORY LOCAL BLOOD FLOW CONTROL INPUT CONNECTIONS
  def map between non_muscle_autoregulatory_local_blood_flow_control and non_muscle_O2_delivery for
    vars POT and POT;
  enddef;
  def map between non_muscle_autoregulatory_local_blood_flow_control and environment for
    vars time and time;
  enddef;
  // NON-MUSCLE O2 DELIVERY INPUT CONNECTIONS
  def map between non_muscle_O2_delivery and circulatory_dynamics for
    vars BFN and BFN;
  enddef;
  def map between non_muscle_O2_delivery and red_cells_and_viscosity for
    vars HM and HM;
  enddef;
  def map between non_muscle_O2_delivery and autonomics for
    vars AOM and AOM;
  enddef;
  def map between non_muscle_O2_delivery and environment for
    vars time and time;
  enddef;
  // PULMONARY FLUID DYNAMICS INPUT CONNECTIONS
  def map between pulmonary_fluid_dynamics and capillary_dynamics for
    vars PPC and PPC;
    vars CPP and CPP;
    vars PPD and PPD;
    vars DFP and DFP;
    vars VPF and VPF;
  enddef;
  def map between pulmonary_fluid_dynamics and circulatory_dynamics for
    vars PPA and PPA;
    vars PLA and PLA;
    vars RPV and RPV;
    vars RPA and RPA;
  enddef;
  def map between pulmonary_fluid_dynamics and environment for
    vars time and time;
  enddef;
  // PULMONARY OXYGEN UPTAKE INPUT CONNECTIONS
  def map between pulmonary_O2_uptake and pulmonary_fluid_dynamics for
    vars VPF and VPF;
  enddef;
  def map between pulmonary_O2_uptake and non_muscle_O2_delivery for
    vars DOB and DOB;
    vars OVA and OVA;
  enddef;
  def map between pulmonary_O2_uptake and red_cells_and_viscosity for
    vars HM and HM;
  enddef;
  // <connection>
  // 	<map_components component_1="pulmonary_O2_uptake" component_2="circulatory_dynamics"/>
  // 	<map_variables variable_1="QRO" variable_2="QRO"/>
  // </connection>
  def map between pulmonary_O2_uptake and environment for
    vars time and time;
  enddef;
  // RED CELLS AND VISCOSITY INPUT CONNECTIONS
  def map between red_cells_and_viscosity and capillary_dynamics for
    vars VP and VP;
  enddef;
  def map between red_cells_and_viscosity and environment for
    vars time and time;
  enddef;
  // STRESS RELAXATION INPUT CONNECTIONS
  def map between stress_relaxation and circulatory_dynamics for
    vars VVE and VVE;
    vars VV6 and VV6;
    vars VV7 and VV7;
  enddef;
  def map between stress_relaxation and environment for
    vars time and time;
  enddef;
  // THIRST DRINKING AND SALT APPETITE INPUT CONNECTIONS
  def map between thirst_drinking_and_salt_appetite and antidiuretic_hormone for
    vars ADHC and ADHC;
  enddef;
  def map between thirst_drinking_and_salt_appetite and angiotensin for
    vars ANM and ANM;
  enddef;
  def map between thirst_drinking_and_salt_appetite and non_muscle_O2_delivery for
    vars POT and POT;
  enddef;
  def map between thirst_drinking_and_salt_appetite and environment for
    vars time and time;
  enddef;
  // VOLUME RECEPTORS INPUT CONNECTIONS
  def map between volume_receptors and environment for
    vars time and time;
  enddef;
  // KIDNEY INPUT CONNECTIONS
  def map between kidney and circulatory_dynamics for
    vars PA and PA;
    vars RBF and RBF;
  enddef;
  def map between kidney and autonomics for
    vars AUM and AUM;
  enddef;
  def map between kidney and angiotensin for
    vars MDFLW and MDFLW;
    vars ANM and ANM;
  enddef;
  def map between kidney and temp_myogrs_and_pamk for
    vars MYOGRS and MYOGRS;
    vars PAMKRN and PAMKRN;
  enddef;
  def map between kidney and red_cells_and_viscosity for
    vars HM1 and HM1;
  enddef;
  def map between kidney and capillary_dynamics for
    vars PPC and PPC;
  enddef;
  def map between kidney and electrolytes for
    vars VTW and VTW;
    vars CNA and CNA;
    vars NOD and NOD;
    vars KOD and KOD;
    vars VUD and VUD;
    vars CKE and CKE;
  enddef;
  def map between kidney and antidiuretic_hormone for
    vars ADHMK and ADHMK;
  enddef;
  def map between kidney and aldosterone for
    vars AMNA and AMNA;
    vars AMK and AMK;
  enddef;
  def map between kidney and atrial_natriuretic_peptide for
    vars ANPX and ANPX;
  enddef;
  def map between kidney and environment for
    vars time and time;
  enddef;
enddef;
// #AU14_to_AU16
// value: AU14, AU15, and AU16: Calculation of adaptation of the baroreceptor feedback mechanism (AU4) over a period of hours. The time constant of this adaptation is equal to AUK. THIS IS COMMENTED OUT BECAUSE IT IS NOT IN THE MODSIM CODE
// #CD35A
// value: CD35A: Damping of QPO to allow rapid computation of long-term hemodynamics. When the value U equals 1.0 there is no damping. Any larger value for U provides proportionate damping.
// #CD19A
// value: CD19A: This block provides damping of the value QVO when running on the computer. A damping value of X of 1.0 is no damping. Any higher value causes damping. The value should be equal to 1.0 when studying rapid changes in circulatory dynamics.
// #Kd116
// value: KD116: Calculation of the actual rate of potassium output from the kidneys (KOD) by multiplying the normalized rate (KODN) times the percentage of normal kidney mass that is present in the body (REK).
// #KD50
// value: KD50: A stability test to test whether or not VUD is varying up and down too much and if so making appropriate mathematical corrections. This is simply a mathematical maneuver for allowing more rapid solution of the equations. NB - This stability test has not been coded!!!
