// reference: Family Guyton; Family Circulatory Dynamics; title Description of Guyton circulatory dynamics module; W3CDTF 2008-00-00 00:00
// reference: subject_type keyword; physiology; organ systems; cardiovascular circulation; circulatory dynamics; Guyton
// value: This section calculates the flow of blood around the circuit from arteries, to veins, to heart, to lungs, and back to heart again. It also calculates the resistances and the effect of various factors on the resistances. In other words, this section presents the basic hemodynamics of the circulatory system.
// simulation: endingValue 1; nonstandard-pointDensity 1000
def model circulatory_dynamics_CellML1_0_model as
  // ========================================		DOCUMENTATION		=============================================
  // Guyton Model: Circulatory Dynamics
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model has not been validated. The equations in this file may contain errors and the output from the model may not conform to the results from the MODSIM program. Due to the differences between procedural code (in this case C-code) and declarative languages (CellML), some aspects of the original model were not able to be encapsulated by the CellML model (such as the damping of variables). Work is underway to fix these omissions and validate the CellML model. We also anticipate that many of these problems will be fixed when the CellML 1.0 models are combined in a CellML 1.1 format.
  //
  // Model Structure
  //
  // Arthur Guyton (1919-2003) was an American physiologist who became famous for his 1950s experiments in which he studied the physiology of cardiac output and its relationship with the peripheral circulation. The results of these experiments challenged the conventional wisdom that it was the heart itself that controlled cardiac output. Instead Guyton demonstrated that it was the need of the body tissues for oxygen which was the real regulator of cardiac output. The "Guyton Curves" describe the relationship between right atrial pressures and cardiac output, and they form a foundation for understanding the physiology of circulation.
  //
  // The Guyton model of fluid, electrolyte, and circulatory regulation is an extensive mathematical model of human circulatory physiology, capable of simulating a variety of experimental conditions, and contains a number of linked subsystems relating to circulation and its neuroendocrine control.
  //
  // This is a CellML translation of the Guyton model of the regulation of the circulatory system. The complete model consists of separate modules each of which characterise a separate physiological subsystems. The Circulation Dynamics is the primary system, to which other modules/blocks are connected. The other modules characterise the dynamics of the kidney, electrolytes and cell water, thirst and drinking, hormone regulation, autonomic regulation, cardiovascular system etc, and these feedback on the central circulation model. The CellML code in these modules is based on the C code from the programme C-MODSIM created by Dr Jean-Pierre Montani.
  //
  // This particular CellML model describes the flow of blood around the circuit from arteries, to veins, to heart, to lungs, and back to heart again. It also calculates the resistances and the effect of various factors on the resistances. In other words, this section presents the basic hemodynamics of the circulatory system.
  //
  // model diagram
  //
  // A systems analysis diagram for the full Guyton model describing circulation regulation.
  //
  // model diagram
  //
  // A schematic diagram of the components and processes described in the current CellML model.
  //
  // There are several publications referring to the Guyton model. One of these papers is cited below:
  //
  // Circulation: Overall Regulation, A.C. Guyton, T.G. Coleman, and H.J. Granger, 1972, Annual Review of Physiology , 34, 13-44. PubMed ID: 4334846 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=4334846&query_hl=1&itool=pubmed_docsum)
  // =======================================================    CITATION AND KEYWORD METADATA    ==================================================
  // ======================================================= 		UNITS		==================================================
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit per_minute as
    unit minute {expo: -1};
  enddef;
  def unit mmHg as
    unit newton {mult: 133.322};
    unit metre {expo: -2};
  enddef;
  def unit per_mmHg as
    unit mmHg {expo: -1};
  enddef;
  def unit mmHg_per_mL as
    unit mmHg;
    unit mL {expo: -1};
  enddef;
  def unit mmHg_L as
    unit mmHg;
    unit litre;
  enddef;
  def unit per_mmHg2 as
    unit mmHg {expo: -2};
  enddef;
  def unit mmHg3 as
    unit mmHg {expo: 3};
  enddef;
  def unit monovalent_mEq as
    unit mole {pref: milli};
  enddef;
  def unit monovalent_mEq_per_minute as
    unit mole {pref: milli};
    unit minute {expo: -1};
  enddef;
  def unit monovalent_mEq_per_litre as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit monovalent_mEq_per_litre_per_minute as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit litre2_per_monovalent_mEq_per_minute as
    unit litre {expo: 2};
    unit mole {pref: milli, expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit L_per_minute as
    unit litre;
    unit minute {expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit gram_per_L as
    unit gram;
    unit litre {expo: -1};
  enddef;
  def unit L_mmHg_per_gram as
    unit litre;
    unit mmHg;
    unit gram {expo: -1};
  enddef;
  def unit L2_mmHg_per_gram2 as
    unit litre {expo: 2};
    unit mmHg;
    unit gram {expo: -2};
  enddef;
  def unit mmHg_minute_per_L as
    unit minute;
    unit mmHg;
    unit litre {expo: -1};
  enddef;
  def unit gram_per_minute as
    unit gram;
    unit minute {expo: -1};
  enddef;
  def unit mL_per_L as
    unit litre {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mL_per_L_per_mmHg as
    unit litre {pref: milli};
    unit litre {expo: -1};
    unit mmHg {expo: -1};
  enddef;
  def unit mL_per_L_per_minute as
    unit litre {pref: milli};
    unit litre {expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit mL_per_minute_per_mmHg as
    unit litre {pref: milli};
    unit minute {expo: -1};
    unit mmHg {expo: -1};
  enddef;
  def unit L_mL_per_minute_per_mmHg as
    unit litre;
    unit litre {pref: milli};
    unit minute {expo: -1};
    unit mmHg {expo: -1};
  enddef;
  def unit L_per_mL as
    unit litre {pref: milli, expo: -1};
    unit litre;
  enddef;
  def unit L_per_mmHg as
    unit mmHg {expo: -1};
    unit litre;
  enddef;
  def unit mL_per_minute as
    unit mL;
    unit minute {expo: -1};
  enddef;
  def unit L_per_minute_per_mmHg as
    unit litre;
    unit minute {expo: -1};
    unit mmHg {expo: -1};
  enddef;
  def unit L_per_minute_per_mmHg2 as
    unit litre;
    unit minute {expo: -1};
    unit mmHg {expo: -2};
  enddef;
  // =====================================================================================================================
  // ========================================	ENVIRONMENT COMPONENT	=============================================

  def comp environment as
    var time: minute {priv: none, pub: out};
  enddef;
  // ========================================	CIRCULATORY DYNAMICS TOP-LEVEL COMPONENT		=============================================

  // value: Encapsulation grouping component containing all the components in the Circulatory Dynamics Model. The inputs and outputs of the Circulatory Dynamics Model must be passed by this component.
  def comp circulatory_dynamics as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var ADHMV: dimensionless {init: 1.0, priv: out, pub: none};
    var AMM: dimensionless {init: 1.0, priv: out, pub: none};
    var ANU: dimensionless {init: 0.925271, priv: out, pub: none};
    var ANUVN: dimensionless {init: 1.0, priv: out, pub: none};
    var ARM: dimensionless {init: 1.16463, priv: out, pub: none};
    var ATRRFB: dimensionless {init: 1.0, priv: out, pub: none};
    var ATRVFB: litre {init: 0.0, priv: out, pub: none};
    var AU: dimensionless {init: 1.00022, priv: out, pub: none};
    var AUH: dimensionless {init: 1.00012, priv: out, pub: none};
    var AUM: dimensionless {init: 1.00066, priv: out, pub: none};
    var AVE: dimensionless {init: 1.0, priv: out, pub: none};
    var HMD: dimensionless {init: 1.0, priv: out, pub: none};
    var HPL: dimensionless {init: 1.00163, priv: out, pub: none};
    var HPR: dimensionless {init: 1.00237, priv: out, pub: none};
    var MYOGRS: dimensionless {init: 1.0, priv: out, pub: none};
    var OSA: dimensionless {init: 0.97287, priv: out, pub: none};
    var PAMK: dimensionless {init: 1.0, priv: out, pub: none};
    var PC: mmHg {init: 16.9144, priv: out, pub: none};
    var RBF: L_per_minute {init: 1.22057, priv: out, pub: none};
    var VIM: dimensionless {init: 1.00076, priv: out, pub: none};
    var VP: litre {init: 3.00449, priv: out, pub: none};
    var VRC: litre {init: 2.00439, priv: out, pub: none};
    var VV6: litre {init: 0.0101913, priv: out, pub: none};
    var VV7: litre {init: 0.00366525, priv: out, pub: none};
    var VVR: litre {init: 2.50967, priv: out, pub: none};
  enddef;
  // INPUT CONNECTIONS
  def map between circulatory_dynamics and environment for
    vars time and time;
  enddef;
  // ========================================	BLOOD VOLUME CHANGE	=============================================

  // value: CD75: The blood volume change that must be distributed to the different segments of the circulation since the last iteration (VBD) is calculated by subtracting the volumes of the various vascular segments (VAS, VVS, VRA, VLA, and VPA) from the total blood volume, that is, plasma volume (VP) plus red cell volume (VRC).
  def comp total_blood_volume_change as
    // Inputs from other components
    var VP: litre {priv: none, pub: in};
    var VRC: litre {priv: none, pub: in};
    var VVS1: litre {priv: none, pub: in};
    var VAS1: litre {priv: none, pub: in};
    var VLA1: litre {priv: none, pub: in};
    var VPA1: litre {priv: none, pub: in};
    var VRA1: litre {priv: none, pub: in};
    // Outputs to other components
    var VBD: litre {priv: none, pub: out};
    // value: CD75: The blood volume change that must be distributed to the different segments of the circulation since the last iteration (VBD) is calculated by subtracting the volumes of the various vascular segments (VAS, VVS, VRA, VLA, and VPA) from the total blood volume, that is, plasma volume (VP) plus red cell volume (VRC).
    VBD = (VP+VRC-VVS1-VAS1-VLA1-VPA1-VRA1)/2{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between total_blood_volume_change and circulatory_dynamics for
    vars VP and VP;
    vars VRC and VRC;
  enddef;
  // ========================================	RIGHT ATRIUM		=============================================

  // value: Containment grouping component for "right_atrial_blood_volume", "right_atrial_pressure", and "autonomic_stimulation_effect_on_right_atrial_pressure".
  def comp right_atrium as
  enddef;
  // ========================================	RIGHT ATRIAL BLOOD VOLUME	=============================================

  // value: CD20: The rate of change of blood volume in the right atrium (DRA) is equal to the rate of blood flow into the right atrium from the veins (QVO) minus the rate of outflow of blood from the right atrium through the right heart (QRO). CD21: A temporary value for the volume of blood in the right atrium is calculated by integrating the rate of change of blood volume in the right atrium (DRA). CD22: The portion of any change in total blood volume (VBD) that is ascribable to the right atrium is calculated by multiplying the total blood volume change (VBD) since the last iteration times a constant. CD23: The instantaneous volume of blood in the right atrium (VRA) is equal to the temporary value calculated in CD21 plus the volume of blood caused by a change in blood volume as calculated in CD22.
  def comp right_atrial_blood_volume as
    // Inputs from other components
    var QVO: L_per_minute {priv: none, pub: in};
    var QRO: L_per_minute {priv: none, pub: in};
    var VBD: litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VRA: litre {priv: none, pub: out};
    var VRA1: litre {init: 0.100043, priv: none, pub: out};
    // Internal variables
    var DRA: L_per_minute {priv: none, pub: none};
    // value: CD20: The rate of change of blood volume in the right atrium (DRA) is equal to the rate of blood flow into the right atrium from the veins (QVO) minus the rate of outflow of blood from the right atrium through the right heart (QRO).
    DRA = QVO-QRO;
    // value: CD21: A temporary value for the volume of blood in the right atrium is calculated by integrating the rate of change of blood volume in the right atrium (DRA).
    ode(VRA1, time) = DRA;
    // value: CD22: The portion of any change in total blood volume (VBD) that is ascribable to the right atrium is calculated by multiplying the total blood volume change (VBD) since the last iteration times a constant. CD23: The instantaneous volume of blood in the right atrium (VRA) is equal to the temporary value calculated in CD21 plus the volume of blood caused by a change in blood volume as calculated in CD22.
    VRA = VRA1+VBD*0.0574{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between right_atrial_blood_volume and rate_of_blood_flow_from_veins_to_right_atrium for
    vars QVO and QVO;
  enddef;
  def map between right_atrial_blood_volume and right_ventricular_output for
    vars QRO and QRO;
  enddef;
  def map between right_atrial_blood_volume and total_blood_volume_change for
    vars VRA1 and VRA1;
    vars VBD and VBD;
  enddef;
  def map between right_atrial_blood_volume and circulatory_dynamics for
    vars time and time;
  enddef;
  // ========================================	RIGHT ATRIAL PRESSURE	=============================================

  // value: CD24: The volume of excess blood in the right atrium (VRE) is equal to the instantaneous volume of blood in the right atrium (VRA) minus a constant value which represents the volume of blood in the right atrium when the atrium is filled to a level that will cause no increase in atrial pressure and the pressure is still zero. CD25: Temporary right atrial pressure (PRA) at normal level of autonomic stimulation (AU=1) is equal to the excess volume of blood in the right atrium (VRE) divided by a constant value which represents the capacitance of the right atrium.
  def comp right_atrial_pressure as
    // Inputs from other components
    var VRA: litre {priv: none, pub: in};
    // Outputs to other components
    var PRA: mmHg {priv: none, pub: out};
    // Internal variables
    var VRE: litre {priv: none, pub: none};
    // value: CD24: The volume of excess blood in the right atrium (VRE) is equal to the instantaneous volume of blood in the right atrium (VRA) minus a constant value which represents the volume of blood in the right atrium when the atrium is filled to a level that will cause no increase in atrial pressure and the pressure is still zero.
    VRE = VRA-0.1{litre};
    // value: CD25: Temporary right atrial pressure (PRA) at normal level of autonomic stimulation (AU=1) is equal to the excess volume of blood in the right atrium (VRE) divided by a constant value which represents the capacitance of the right atrium.
    PRA = VRE/0.005{L_per_mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between right_atrial_pressure and right_atrial_blood_volume for
    vars VRA and VRA;
  enddef;
  // ===============================	AUTONOMIC STIMULATION EFFECT ON RIGHT ATRIAL PRESSURE	========================================

  // value: CD25C, CD25D, CD25E, and CD25F: Calculation of the shift of the temporary calculated right atrial pressure of PRA to its actual value of PRA1 when the level of autonomic stimulation AU) changes to some other value besides the normal value of 1.0. The value of HTAUML determines the ratio of the slope of changing PRA1 to slope of changing PRA.
  def comp autonomic_stimulation_effect_on_right_atrial_pressure as
    // Inputs from other components
    var PRA: mmHg {priv: none, pub: in};
    var AU: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var PRA1: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var HTAUML: dimensionless {priv: none, pub: in};
    // value: CD25C, CD25D, CD25E, and CD25F: Calculation of the shift of the temporary calculated right atrial pressure of PRA to its actual value of PRA1 when the level of autonomic stimulation AU) changes to some other value besides the normal value of 1.0. The value of HTAUML determines the ratio of the slope of changing PRA1 to slope of changing PRA.
    PRA1 = (PRA+8{mmHg})*(HTAUML*(AU-1{dimensionless})+1{dimensionless})-8{mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between autonomic_stimulation_effect_on_right_atrial_pressure and right_atrial_pressure for
    vars PRA and PRA;
  enddef;
  def map between autonomic_stimulation_effect_on_right_atrial_pressure and circulatory_dynamics for
    vars AU and AU;
  enddef;
  // PARAMETER CONNECTIONS
  def map between autonomic_stimulation_effect_on_right_atrial_pressure and parameter_values for
    vars HTAUML and HTAUML;
  enddef;
  // ========================================	RIGHT VENTIRICLE	=============================================

  // value: Containment grouping component for "pressure_effect_on_right_ventricular_pumping", "pumping_effectiveness_of_right_ventricle" and "right_ventricular_output".
  def comp right_ventricle as
  enddef;
  // ========================================	PRESSURE EFFECT ON RIGHT VENTRICULAR PUMPING	=============================================

  // value: CD68: Calculation of a multiplier factor (PP2) from three factors that affect the ability of the right heart to withstand increasing output loads: The effect of the pulmonary arterial pressure itself (PPA), the effect of changes in heart arterial oxygen saturation in the coronary blood flow (OSA), and the effect of sympathetic stimulation (AUH). CD69: Function curve relating the multiplier factor from CD68 (PP2) to a multiplier factor for pumping strength of the right heart musculature (RVM).
  def comp pressure_effect_on_right_ventricular_pumping as
    // Inputs from other components
    var PPA: mmHg {priv: none, pub: in};
    var AUH: dimensionless {priv: none, pub: in};
    var OSA: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var RVM: dimensionless {priv: none, pub: out};
    // Internal variables
    var PP2: mmHg {priv: none, pub: none};
    // value: CD68: Calculation of a multiplier factor (PP2) from three factors that affect the ability of the right heart to withstand increasing output loads: The effect of the pulmonary arterial pressure itself (PPA), the effect of changes in heart arterial oxygen saturation in the coronary blood flow (OSA), and the effect of sympathetic stimulation (AUH).
    PP2 = PPA/AUH/OSA;
    // value: CD69: Function curve relating the multiplier factor from CD68 (PP2) to a multiplier factor for pumping strength of the right heart musculature (RVM).
    RVM = sel
      case PP2 <= 0{mmHg}:
        1.06{dimensionless};
      case (PP2 > 0{mmHg}) and (PP2 <= 32{mmHg}):
        1.06{dimensionless}+(0.97{per_mmHg}-1.06{per_mmHg})*(PP2-0{mmHg})/(32{dimensionless}-0{dimensionless});
      case (PP2 > 32{mmHg}) and (PP2 <= 38.4{mmHg}):
        0.97{dimensionless}+(0.93{per_mmHg}-0.97{per_mmHg})*(PP2-32{mmHg})/(38.4{dimensionless}-32{dimensionless});
      case (PP2 > 38.4{mmHg}) and (PP2 <= 48{mmHg}):
        0.93{dimensionless}+(0.8{per_mmHg}-0.93{per_mmHg})*(PP2-38.4{mmHg})/(48{dimensionless}-38.4{dimensionless});
      case (PP2 > 48{mmHg}) and (PP2 <= 60.8{mmHg}):
        0.8{dimensionless}+(0.46{per_mmHg}-0.8{per_mmHg})*(PP2-48{mmHg})/(60.8{dimensionless}-48{dimensionless});
      case (PP2 > 60.8{mmHg}) and (PP2 <= 72{mmHg}):
        0.46{dimensionless}+(0{per_mmHg}-0.46{per_mmHg})*(PP2-60.8{mmHg})/(72{dimensionless}-60.8{dimensionless});
      otherwise:
        0{dimensionless};
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between pressure_effect_on_right_ventricular_pumping and pulmonary_vasculature_pressure for
    vars PPA and PPA;
  enddef;
  def map between pressure_effect_on_right_ventricular_pumping and circulatory_dynamics for
    vars AUH and AUH;
    vars OSA and OSA;
  enddef;
  // ========================================	PUMPING EFFECTIVENESS OF RIGHT VENTRICLE	=============================================

  // value: CD70 and CD71: Calculation of the proportion of the pumping effectiveness of the right heart that is caused by left heart contraction. This is determined by the normal proportion (QRF) times the instantaneous output of the left heart (QLO) and divided by the normalized output of the left heart (QLN) when all factors affecting left heart strength are normal. CD72 and CD73: Calculation of the proportion of the right heart pumping effectiveness that is caused by right heart musculature contraction itself, calculated from multiple factors that affect right heart pumping including the normal proportion of right heart pumping that is caused by left heart pumping (QRF), the strength of the right heart (HSR) relative to its normal strength, the loading effect of pulmonary arterial pressure on the right heart (RVM), the effect of autonomic stimulation on right heart strength (AUH), the effect of possible deterioration of the right heart from shock and other factors (HMD), and the effect on right heart strength caused by hypertrophy of the right heart (HPR). CD74: Calculation of the pumping effectiveness of the right heart (HPEF) by adding the proportion of the pumping effectiveness caused by left heart function as calculated from CD71 plus the proportion caused by pumping by the right heart as calculated from CD73.
  def comp pumping_effectiveness_of_right_ventricle as
    // Inputs from other components
    var AUH: dimensionless {priv: none, pub: in};
    var RVM: dimensionless {priv: none, pub: in};
    var HMD: dimensionless {priv: none, pub: in};
    var HPR: dimensionless {priv: none, pub: in};
    var QLO: L_per_minute {priv: none, pub: in};
    var QLN: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var HPEF: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var QRF: L_per_minute {priv: none, pub: in};
    var HSR: dimensionless {priv: none, pub: in};
    // value: CD70 and CD71: Calculation of the proportion of the pumping effectiveness of the right heart that is caused by left heart contraction. This is determined by the normal proportion (QRF) times the instantaneous output of the left heart (QLO) and divided by the normalized output of the left heart (QLN) when all factors affecting left heart strength are normal. CD72 and CD73: Calculation of the proportion of the right heart pumping effectiveness that is caused by right heart musculature contraction itself, calculated from multiple factors that affect right heart pumping including the normal proportion of right heart pumping that is caused by left heart pumping (QRF), the strength of the right heart (HSR) relative to its normal strength, the loading effect of pulmonary arterial pressure on the right heart (RVM), the effect of autonomic stimulation on right heart strength (AUH), the effect of possible deterioration of the right heart from shock and other factors (HMD), and the effect on right heart strength caused by hypertrophy of the right heart (HPR). CD74: Calculation of the pumping effectiveness of the right heart (HPEF) by adding the proportion of the pumping effectiveness caused by left heart function as calculated from CD71 plus the proportion caused by pumping by the right heart as calculated from CD73.
    HPEF = (1{L_per_minute}-QRF)*AUH*RVM*HSR*HMD*HPR+QRF*QLO/QLN;
  enddef;
  // INPUT CONNECTIONS
  def map between pumping_effectiveness_of_right_ventricle and circulatory_dynamics for
    vars AUH and AUH;
    vars HMD and HMD;
    vars HPR and HPR;
  enddef;
  def map between pumping_effectiveness_of_right_ventricle and pressure_effect_on_right_ventricular_pumping for
    vars RVM and RVM;
  enddef;
  def map between pumping_effectiveness_of_right_ventricle and left_ventricular_output for
    vars QLO and QLO;
    vars QLN and QLN;
  enddef;
  // PARAMETER CONNECTIONS
  def map between pumping_effectiveness_of_right_ventricle and parameter_values for
    vars QRF and QRF;
    vars HSR and HSR;
  enddef;
  // ========================================	RIGHT VENTRICULAR OUTPUT	=============================================

  // value: CD26: Function curve that gives the output from the right heart (QRN) for any given level of right atrial pressure (PRA1) when all conditions of the right heart are normal. CD27: Calculation of the actual output from the right heart (QRO) by multiplying the normalized value for the output (QRN) times a value that represents the instantaneous pumping effectiveness of the right heart (HPEF).
  def comp right_ventricular_output as
    // Inputs from other components
    var PRA1: mmHg {priv: none, pub: in};
    var HPEF: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var QRO: L_per_minute {priv: none, pub: out};
    // Internal variables
    var QRN: dimensionless {priv: none, pub: none};
    // value: CD26: Function curve that gives the output from the right heart (QRN) for any given level of right atrial pressure (PRA1) when all conditions of the right heart are normal.
    QRN = sel
      case PRA1 <= -8{mmHg}:
        0{dimensionless};
      case (PRA1 > -8{mmHg}) and (PRA1 <= -6{mmHg}):
        0{dimensionless}+(0.75{per_mmHg}-0{per_mmHg})*(PRA1-(-8{mmHg}))/(-6{dimensionless}-(-8{dimensionless}));
      case (PRA1 > -6{mmHg}) and (PRA1 <= -2{mmHg}):
        0.75{dimensionless}+(2.6{per_mmHg}-0.75{per_mmHg})*(PRA1-(-6{mmHg}))/(-2{dimensionless}-(-6{dimensionless}));
      case (PRA1 > -2{mmHg}) and (PRA1 <= 4{mmHg}):
        2.6{dimensionless}+(9.8{per_mmHg}-2.6{per_mmHg})*(PRA1-(-2{mmHg}))/(4{dimensionless}-(-2{dimensionless}));
      case (PRA1 > 4{mmHg}) and (PRA1 <= 12{mmHg}):
        9.8{dimensionless}+(13.5{per_mmHg}-9.8{per_mmHg})*(PRA1-4{mmHg})/(12{dimensionless}-4{dimensionless});
      otherwise:
        13.5{dimensionless};
    endsel;
    // value: CD27: Calculation of the actual output from the right heart (QRO) by multiplying the normalized value for the output (QRN) times a value that represents the instantaneous pumping effectiveness of the right heart (HPEF).
    QRO = QRN*HPEF;
  enddef;
  // INPUT CONNECTIONS
  def map between right_ventricular_output and autonomic_stimulation_effect_on_right_atrial_pressure for
    vars PRA1 and PRA1;
  enddef;
  def map between right_ventricular_output and pumping_effectiveness_of_right_ventricle for
    vars HPEF and HPEF;
  enddef;
  // ========================================	PULMONARY VASCULATURE	=============================================

  // value: Containment grouping component for "pulmonary_vasculature_blood_volume", "pulmonary_vasculature_pressure", "pulmonary_arterial_resistance", "pulmonary_venous_resistance", "total_pulmonary_vasculature_resistance", "pressure_gradient_through_the_lungs" and "rate_of_blood_flow_from_pulmonary_veins_to_left_atrium".
  def comp pulmonary_vasculature as
  enddef;
  // ========================================	PULMONARY VASCULATURE BLOOD VOLUME		=============================================

  // value: CD28: Rate of change of blood volume in the pulmonary arterial tree (DPA) is equal to the rate of blood flow into the pulmonary arterial tree (QRO) minus the rate of blood flow from the pulmonary arterial tree to the pulmonary venous tree (QPO). CD29: A temporary value for the instantaneous volume of blood in the pulmonary arterial tree is calculated by integrating the rate of change of blood volume in the pulmonary arterial tree (DPA). CD30: The portion ascribable to the pulmonary arteries of any total blood volume change (VBD) that has occurred since the last iteration is calculated by multiplying the total volume change since the last iteration (VBD) times a constant proportionality factor. CD31: The instantaneous volume of blood in the pulmonary arteria tree (VPA) is equal to the temporary value calculated from Block CD29 plus the additional blood resulting from a blood volume change as calculated in CD30.
  def comp pulmonary_vasculature_blood_volume as
    // Inputs from other components
    var QRO: L_per_minute {priv: none, pub: in};
    var QPO: L_per_minute {priv: none, pub: in};
    var VBD: litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VPA: litre {priv: none, pub: out};
    var VPA1: litre {init: 0.38131, priv: none, pub: out};
    // Internal variables
    var DPA: L_per_minute {priv: none, pub: none};
    // value: CD28: Rate of change of blood volume in the pulmonary arterial tree (DPA) is equal to the rate of blood flow into the pulmonary arterial tree (QRO) minus the rate of blood flow from the pulmonary arterial tree to the pulmonary venous tree (QPO).
    DPA = QRO-QPO;
    // value: CD29: A temporary value for the instantaneous volume of blood in the pulmonary arterial tree is calculated by integrating the rate of change of blood volume in the pulmonary arterial tree (DPA).
    ode(VPA1, time) = DPA;
    // value: CD30: The portion ascribable to the pulmonary arteries of any total blood volume change (VBD) that has occurred since the last iteration is calculated by multiplying the total volume change since the last iteration (VBD) times a constant proportionality factor. CD31: The instantaneous volume of blood in the pulmonary arteria tree (VPA) is equal to the temporary value calculated from Block CD29 plus the additional blood resulting from a blood volume change as calculated in CD30.
    VPA = VPA1+VBD*0.155{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between pulmonary_vasculature_blood_volume and right_ventricular_output for
    vars QRO and QRO;
  enddef;
  def map between pulmonary_vasculature_blood_volume and rate_of_blood_flow_from_pulmonary_veins_to_left_atrium for
    vars QPO and QPO;
  enddef;
  def map between pulmonary_vasculature_blood_volume and total_blood_volume_change for
    vars VPA1 and VPA1;
    vars VBD and VBD;
  enddef;
  def map between pulmonary_vasculature_blood_volume and circulatory_dynamics for
    vars time and time;
  enddef;
  // ========================================	PULMONARY VASCULATURE PRESSURE		=============================================

  // value: CD32: Excess volume of blood in the pulmonary arterial tree (VPE) is equal to the instantaneous volume of blood in the pulmonary tree (VPA) minus a constant value which represents the volume of blood in the pulmonary arterial tree when it is filled but still at zero pressure. CD33: The pulmonary arterial pressure (PPA) is equal to the excess volume of blood in the pulmonary arterial tree (VPE) divided by a constant which is equal to the capacitance of the pulmonary arterial tree.
  def comp pulmonary_vasculature_pressure as
    // Inputs from other components
    var VPA: litre {priv: none, pub: in};
    // Outputs to other components
    var PPA: mmHg {priv: none, pub: out};
    // Internal variables
    var VPE: litre {priv: none, pub: none};
    // value: CD32: Excess volume of blood in the pulmonary arterial tree (VPE) is equal to the instantaneous volume of blood in the pulmonary tree (VPA) minus a constant value which represents the volume of blood in the pulmonary arterial tree when it is filled but still at zero pressure.
    VPE = VPA-0.30625{litre};
    // value: CD33: The pulmonary arterial pressure (PPA) is equal to the excess volume of blood in the pulmonary arterial tree (VPE) divided by a constant which is equal to the capacitance of the pulmonary arterial tree.
    PPA = VPE/0.0048{L_per_mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between pulmonary_vasculature_pressure and pulmonary_vasculature_blood_volume for
    vars VPA and VPA;
  enddef;
  // ========================================	PULMONARY ARTERIAL RESISTANCE	=============================================

  // value: CD59, CD60, CD61, and CD62: Calculation of the resistance through the pulmonary arterioles (RPA) caused by changes in pulmonary arterial pressure (PPA). CD60 gives a limit value for one of the intermediate calculations, and CD61 gives an exponential effect of pressure on natriuresis.
  def comp pulmonary_arterial_resistance as
    // Inputs from other components
    var PPA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var RPA: mmHg_minute_per_L {priv: none, pub: out};
    // Internal variables
    var PP1T: L_per_minute_per_mmHg {priv: none, pub: none};
    var PP1: L_per_minute_per_mmHg {priv: none, pub: none};
    var CPA: L_per_minute_per_mmHg {priv: none, pub: none};
    // value: CD59, CD60, CD61, and CD62: Calculation of the resistance through the pulmonary arterioles (RPA) caused by changes in pulmonary arterial pressure (PPA). CD60 gives a limit value for one of the intermediate calculations, and CD61 gives an exponential effect of pressure on natriuresis.
    PP1T = 0.026{L_per_minute_per_mmHg2}*PPA;
    // value: CD59, CD60, CD61, and CD62: Calculation of the resistance through the pulmonary arterioles (RPA) caused by changes in pulmonary arterial pressure (PPA). CD60 gives a limit value for one of the intermediate calculations, and CD61 gives an exponential effect of pressure on natriuresis.
    PP1 = sel
      case PP1T < 0.00001{L_per_minute_per_mmHg}:
        0.00001{L_per_minute_per_mmHg};
      otherwise:
        PP1T;
    endsel;
    // value: CD59, CD60, CD61, and CD62: Calculation of the resistance through the pulmonary arterioles (RPA) caused by changes in pulmonary arterial pressure (PPA). CD60 gives a limit value for one of the intermediate calculations, and CD61 gives an exponential effect of pressure on natriuresis.
    CPA = pow(PP1, 0.5{dimensionless});
    // value: CD59, CD60, CD61, and CD62: Calculation of the resistance through the pulmonary arterioles (RPA) caused by changes in pulmonary arterial pressure (PPA). CD60 gives a limit value for one of the intermediate calculations, and CD61 gives an exponential effect of pressure on natriuresis.
    RPA = 1{dimensionless}/CPA;
  enddef;
  // INPUT CONNECTIONS
  def map between pulmonary_arterial_resistance and pulmonary_vasculature_pressure for
    vars PPA and PPA;
  enddef;
  // ========================================	PULMONARY VENOUS RESISTANCE	=============================================

  // value: CD63 and CD64: Calculation of the resistance of blood flow through the pulmonary veins (RPV) as a function of the left atrial pressure (PLA). Basically an increase in left atrial pressure distends the pulmonary veins and reduces the resistance.
  def comp pulmonary_venous_resistance as
    // Inputs from other components
    var PLA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var RPV: mmHg_minute_per_L {priv: none, pub: out};
    // Internal variables
    var PL1: mmHg {priv: none, pub: none};
    // value: CD63 and CD64: Calculation of the resistance of blood flow through the pulmonary veins (RPV) as a function of the left atrial pressure (PLA). Basically an increase in left atrial pressure distends the pulmonary veins and reduces the resistance.
    PL1 = PLA+18{mmHg};
    // value: CD63 and CD64: Calculation of the resistance of blood flow through the pulmonary veins (RPV) as a function of the left atrial pressure (PLA). Basically an increase in left atrial pressure distends the pulmonary veins and reduces the resistance.
    RPV = 1{dimensionless}/(PL1*0.0357{L_per_minute_per_mmHg2});
  enddef;
  // INPUT CONNECTIONS
  def map between pulmonary_venous_resistance and left_atrial_pressure for
    vars PLA and PLA;
  enddef;
  // ========================================	TOTAL PULMONARY VASCULAR RESISTANCE		=============================================

  // value: CD65: The total resistance in the pulmonary circuit (RPT) is equal to the sum of the pulmonary arterial resistance (RPA) plus the pulmonary venous resistance (RPV).
  def comp total_pulmonary_vascular_resistance as
    // Inputs from other components
    var RPV: mmHg_minute_per_L {priv: none, pub: in};
    var RPA: mmHg_minute_per_L {priv: none, pub: in};
    // Outputs to other components
    var RPT: mmHg_minute_per_L {priv: none, pub: out};
    // value: CD65: The total resistance in the pulmonary circuit (RPT) is equal to the sum of the pulmonary arterial resistance (RPA) plus the pulmonary venous resistance (RPV).
    RPT = RPV+RPA;
  enddef;
  // INPUT CONNECTIONS
  def map between total_pulmonary_vascular_resistance and pulmonary_venous_resistance for
    vars RPV and RPV;
  enddef;
  def map between total_pulmonary_vascular_resistance and pulmonary_arterial_resistance for
    vars RPA and RPA;
  enddef;
  // ========================================	PRESSURE GRADIENT THROUGH THE LUNGS		=============================================

  // value: CD34: The pressure gradient through the lungs from the pulmonary arteries to the pulmonary veins (PGL) is equal to the pressure in the pulmonary arteries (PPA) minus the pressure in the left atrium (PLA).
  def comp pressure_gradient_through_the_lungs as
    // Inputs from other components
    var PPA: mmHg {priv: none, pub: in};
    var PLA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var PGL: mmHg {priv: none, pub: out};
    // value: CD34: The pressure gradient through the lungs from the pulmonary arteries to the pulmonary veins (PGL) is equal to the pressure in the pulmonary arteries (PPA) minus the pressure in the left atrium (PLA).
    PGL = PPA-PLA;
  enddef;
  // INPUT CONNECTIONS
  def map between pressure_gradient_through_the_lungs and pulmonary_vasculature_pressure for
    vars PPA and PPA;
  enddef;
  def map between pressure_gradient_through_the_lungs and left_atrial_pressure for
    vars PLA and PLA;
  enddef;
  // ===============================		RATE OF BLOOD FLOW FROM PULMONARY VEINS TO LEFT ATRIUM		======================================

  // value: CD35: Rate of outflow of blood from the pulmonary arterial tree (QPO) is equal to the pressure gradient through the lungs (PGL) divided by the resistance to blood flow through the lungs (RPT). CD35A: Damping of QPO to allow rapid computation of long-term hemodynamics. When the value U equals 1.0 there is no damping. Any larger value for U provides proportionate damping.
  def comp rate_of_blood_flow_from_pulmonary_veins_to_left_atrium as
    // Inputs from other components
    var PGL: mmHg {priv: none, pub: in};
    var RPT: mmHg_minute_per_L {priv: none, pub: in};
    var QLO: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var QPO: L_per_minute {priv: none, pub: out};
    // value: CD35: Rate of outflow of blood from the pulmonary arterial tree (QPO) is equal to the pressure gradient through the lungs (PGL) divided by the resistance to blood flow through the lungs (RPT).
    QPO = PGL/RPT;
    // <apply id="CD35A - DAMPING!!!">
    // 	<eq/>
    // 	<ci>QPO</ci>
    // 	<apply>
    // 		<plus/>
    // 		<ci>QLO</ci>
    // 		<apply>
    // 			<divide/>
    // 			<apply>
    // 				<minus/>
    // 				<ci>QPO</ci>
    // 				<ci>QLO</ci>
    // 			</apply>
    // 			<ci>U</ci>
    // 		</apply>
    // 	</apply>
    // </apply>
  enddef;
  // INPUT CONNECTIONS
  def map between rate_of_blood_flow_from_pulmonary_veins_to_left_atrium and pressure_gradient_through_the_lungs for
    vars PGL and PGL;
  enddef;
  def map between rate_of_blood_flow_from_pulmonary_veins_to_left_atrium and total_pulmonary_vascular_resistance for
    vars RPT and RPT;
  enddef;
  def map between rate_of_blood_flow_from_pulmonary_veins_to_left_atrium and left_ventricular_output for
    vars QLO and QLO;
  enddef;
  // ========================================	LEFT ATRIUM	=============================================

  // value: Containment grouping component for "left_atrial_blood_volume", "left_atrial_pressure" and "autonomic_stimulation_effect_on_left_atrial_pressure".
  def comp left_atrium as
  enddef;
  // ========================================	LEFT ATRIAL BLOOD VOLUME	=============================================

  // value: CD36: The rate of change of blood volume in the left atrium (DLA) is equal to the rate of blood flow into the left atrium from the pulmonary circulation (QPO) minus the rate of blood flow out of the left atrium through the left heart (QLO). CD37: Calculation of a temporary value for the instantaneous volume of blood in the left atrium by integrating the rate of blood volume change in the left atrium (DLA). CD38: Calculation of the proportion of any blood volume change (VBD) that has occurred since the last iteration that is distributed to the left atrium, calculated by multiplying by a porprotionality constant. CD39: The instantaneous volume of blood in the left atrium (VLA) is equal to the temporary value calculated in CD37 plus the proportion of any blood volume change that is attributable to the left atrium as calculated in CD38.
  def comp left_atrial_blood_volume as
    // Inputs from other components
    var QPO: L_per_minute {priv: none, pub: in};
    var QLO: L_per_minute {priv: none, pub: in};
    var VBD: litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VLA: litre {priv: none, pub: out};
    var VLA1: litre {init: 0.379883, priv: none, pub: out};
    // Internal variables
    var DLA: L_per_minute {priv: none, pub: none};
    // value: CD36: The rate of change of blood volume in the left atrium (DLA) is equal to the rate of blood flow into the left atrium from the pulmonary circulation (QPO) minus the rate of blood flow out of the left atrium through the left heart (QLO).
    DLA = QPO-QLO;
    // value: CD37: Calculation of a temporary value for the instantaneous volume of blood in the left atrium by integrating the rate of blood volume change in the left atrium (DLA).
    ode(VLA1, time) = DLA;
    // value: CD38: Calculation of the proportion of any blood volume change (VBD) that has occurred since the last iteration that is distributed to the left atrium, calculated by multiplying by a porprotionality constant. CD39: The instantaneous volume of blood in the left atrium (VLA) is equal to the temporary value calculated in CD37 plus the proportion of any blood volume change that is attributable to the left atrium as calculated in CD38.
    VLA = VLA1+VBD*0.128{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between left_atrial_blood_volume and rate_of_blood_flow_from_pulmonary_veins_to_left_atrium for
    vars QPO and QPO;
  enddef;
  def map between left_atrial_blood_volume and left_ventricular_output for
    vars QLO and QLO;
  enddef;
  def map between left_atrial_blood_volume and total_blood_volume_change for
    vars VLA1 and VLA1;
    vars VBD and VBD;
  enddef;
  def map between left_atrial_blood_volume and circulatory_dynamics for
    vars time and time;
  enddef;
  // ========================================	LEFT ATRIAL PRESSURE	=============================================

  // value: CD40: The excess blood volume in the left atrium (VLE) is equal to the instantaneous volume of blood in the left atrium (VLA) minus a constant value which is the volume of blood in the left atrium when it is filled with the pressure at zero. CD41: The pressure in the left atrium (PLE) is equal to the instantaneous exces volume in the left atrium (VLE) divided by a constant which is equal to the capacitance of the left atrium.
  def comp left_atrial_pressure as
    // Inputs from other components
    var VLA: litre {priv: none, pub: in};
    // Outputs to other components
    var PLA: mmHg {priv: none, pub: out};
    // Internal variables
    var VLE: litre {priv: none, pub: none};
    // value: CD40: The excess blood volume in the left atrium (VLE) is equal to the instantaneous volume of blood in the left atrium (VLA) minus a constant value which is the volume of blood in the left atrium when it is filled with the pressure at zero.
    VLE = VLA-0.38{litre};
    // value: CD41: The pressure in the left atrium (PLE) is equal to the instantaneous exces volume in the left atrium (VLE) divided by a constant which is equal to the capacitance of the left atrium.
    PLA = VLE/0.01{L_per_mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between left_atrial_pressure and left_atrial_blood_volume for
    vars VLA and VLA;
  enddef;
  // =================================	AUTONOMIC STIMULATION EFFECT ON LEFT ATRIAL PRESSURE	=========================================

  // value: CD41A, CD41B, CD41C, and CD41D: These blocks serve the same functions for the left heart that Blocks CD25C, CD25D, CD25E, and CD25F serve for the right ventricle. The value AU in Block CD41D is the level of autonomic stimulation of the heart, and HTAUML is the multiplier constant for calculating the effect of changes in AU on the shift of left atrial pressure effect from PLA to PLA1.
  def comp autonomic_stimulation_effect_on_left_atrial_pressure as
    // Inputs from other components
    var PLA: mmHg {priv: none, pub: in};
    var AU: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var PLA1: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var HTAUML: dimensionless {priv: none, pub: in};
    // value: CD41A, CD41B, CD41C, and CD41D: These blocks serve the same functions for the left heart that Blocks CD25C, CD25D, CD25E, and CD25F serve for the right ventricle. The value AU in Block CD41D is the level of autonomic stimulation of the heart, and HTAUML is the multiplier constant for calculating the effect of changes in AU on the shift of left atrial pressure effect from PLA to PLA1.
    PLA1 = (PLA+4{mmHg})*(HTAUML*(AU-1{dimensionless})+1{dimensionless})-4{mmHg};
  enddef;
  // INPUT CONNECTIONS
  def map between autonomic_stimulation_effect_on_left_atrial_pressure and left_atrial_pressure for
    vars PLA and PLA;
  enddef;
  def map between autonomic_stimulation_effect_on_left_atrial_pressure and circulatory_dynamics for
    vars AU and AU;
  enddef;
  // PARAMETER CONNECTIONS
  def map between autonomic_stimulation_effect_on_left_atrial_pressure and parameter_values for
    vars HTAUML and HTAUML;
  enddef;
  // ========================================	LEFT VENTRICLE		=============================================

  // value: Containment grouping component for "pumping_effectiveness_of_left_ventricle", and "left_ventricular_output".
  def comp left_ventricle as
  enddef;
  // ========================================	PUMPING EFFECTIVENESS OF LEFT VENTRICLE	=============================================

  // value: CD66: A temporary multiplier function (PA2) for the effectiveness of left heart pumping is calculated from three factors: Stimulation of the left heart by the autonomic nervous system (AUH), effect on heart pumping caused by changes in arterial oxygen saturation (OSA), effect on heart pumping caused by the loading effect of systemic arterial pressure (PA). CD67: Function curve relating the pumping effectiveness of the left heart (LVM) to the multiplier function calculated in CD66 (PA2).
  def comp pumping_effectiveness_of_left_ventricle as
    // Inputs from other components
    var PA: mmHg {priv: none, pub: in};
    var AUH: dimensionless {priv: none, pub: in};
    var OSA: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var LVM: dimensionless {priv: none, pub: out};
    // Internal variables
    var PA2: mmHg {priv: none, pub: none};
    // value: CD66: A temporary multiplier function (PA2) for the effectiveness of left heart pumping is calculated from three factors: Stimulation of the left heart by the autonomic nervous system (AUH), effect on heart pumping caused by changes in arterial oxygen saturation (OSA), effect on heart pumping caused by the loading effect of systemic arterial pressure (PA).
    PA2 = PA/(AUH*OSA);
    // value: CD67: Function curve relating the pumping effectiveness of the left heart (LVM) to the multiplier function calculated in CD66 (PA2).
    LVM = sel
      case PA2 <= 0{mmHg}:
        1.04{dimensionless};
      case (PA2 > 0{mmHg}) and (PA2 <= 60{mmHg}):
        1.04{dimensionless}+(1.025{per_mmHg}-1.04{per_mmHg})*(PA2-0{mmHg})/(60{dimensionless}-0{dimensionless});
      case (PA2 > 60{mmHg}) and (PA2 <= 125{mmHg}):
        1.025{dimensionless}+(0.97{per_mmHg}-1.025{per_mmHg})*(PA2-60{mmHg})/(125{dimensionless}-60{dimensionless});
      case (PA2 > 125{mmHg}) and (PA2 <= 160{mmHg}):
        0.97{dimensionless}+(0.88{per_mmHg}-0.97{per_mmHg})*(PA2-125{mmHg})/(160{dimensionless}-125{dimensionless});
      case (PA2 > 160{mmHg}) and (PA2 <= 200{mmHg}):
        0.88{dimensionless}+(0.59{per_mmHg}-0.88{per_mmHg})*(PA2-160{mmHg})/(200{dimensionless}-160{dimensionless});
      case (PA2 > 200{mmHg}) and (PA2 <= 240{mmHg}):
        0.59{dimensionless}+(0{per_mmHg}-0.59{per_mmHg})*(PA2-200{mmHg})/(240{dimensionless}-200{dimensionless});
      otherwise:
        0{dimensionless};
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between pumping_effectiveness_of_left_ventricle and arterial_pressure_and_pressure_gradient for
    vars PA and PA;
  enddef;
  def map between pumping_effectiveness_of_left_ventricle and circulatory_dynamics for
    vars AUH and AUH;
    vars OSA and OSA;
  enddef;
  // ========================================	LEFT VENTRICULAR OUTPUT		=============================================

  // value: CD42: Function curve that gives the normalized rate of output of the left ventricle (QLN) when the left ventricle is operating at a normal level of pumping effectiveness for any given left atrial pressure (PLA). CD43: The actual rate of output from the left ventricle (QLO) when the normalized rate (QLN) is multiplied by various factors that alter the pumping effectiveness of the heart: A multiplier that reduces the effectiveness because of pressure load on the heart (LVM), a factor that changes the effectiveness of the heart because of abnormal left heart strength (HSL), a factor that increases the effectiveness of the heart because of hypertrophy (HPL), a factor that decreases the strength of the heart because of deterioration of the heart in low blood flow states (HMD), and a factor that alters the strength of the heart by increases or decreases in autonomic stimulation (AUH).
  def comp left_ventricular_output as
    // Inputs from other components
    var PLA1: mmHg {priv: none, pub: in};
    var LVM: dimensionless {priv: none, pub: in};
    var AUH: dimensionless {priv: none, pub: in};
    var HMD: dimensionless {priv: none, pub: in};
    var HPL: dimensionless {priv: none, pub: in};
    var PLA: mmHg {priv: none, pub: in};
    var PA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var QLO: L_per_minute {priv: none, pub: out};
    var QLOT: L_per_minute {priv: none, pub: out};
    var QLN: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var HSL: dimensionless {priv: none, pub: in};
    // Internal variables
    var QLO1: L_per_minute {priv: none, pub: none};
    // value: CD42: Function curve that gives the normalized rate of output of the left ventricle (QLN) when the left ventricle is operating at a normal level of pumping effectiveness for any given left atrial pressure (PLA).
    QLN = sel
      case PLA1 <= -2{mmHg}:
        0.01{L_per_minute};
      case (PLA1 > -2{mmHg}) and (PLA1 <= 1{mmHg}):
        0.01{L_per_minute}+(3.6{L_per_minute_per_mmHg}-0.01{L_per_minute_per_mmHg})*(PLA1-(-2{mmHg}))/(1{dimensionless}-(-2{dimensionless}));
      case (PLA1 > 1{mmHg}) and (PLA1 <= 5{mmHg}):
        3.6{L_per_minute}+(9.4{L_per_minute_per_mmHg}-3.6{L_per_minute_per_mmHg})*(PLA1-1{mmHg})/(5{dimensionless}-1{dimensionless});
      case (PLA1 > 5{mmHg}) and (PLA1 <= 8{mmHg}):
        9.4{L_per_minute}+(11.6{L_per_minute_per_mmHg}-9.4{L_per_minute_per_mmHg})*(PLA1-5{mmHg})/(8{dimensionless}-5{dimensionless});
      case (PLA1 > 8{mmHg}) and (PLA1 <= 12{mmHg}):
        11.6{L_per_minute}+(13.5{L_per_minute_per_mmHg}-11.6{L_per_minute_per_mmHg})*(PLA1-8{mmHg})/(12{dimensionless}-8{dimensionless});
      otherwise:
        13.5{L_per_minute};
    endsel;
    // value: CD43: The actual rate of output from the left ventricle (QLO) when the normalized rate (QLN) is multiplied by various factors that alter the pumping effectiveness of the heart: A multiplier that reduces the effectiveness because of pressure load on the heart (LVM), a factor that changes the effectiveness of the heart because of abnormal left heart strength (HSL), a factor that increases the effectiveness of the heart because of hypertrophy (HPL), a factor that decreases the strength of the heart because of deterioration of the heart in low blood flow states (HMD), and a factor that alters the strength of the heart by increases or decreases in autonomic stimulation (AUH).
    QLOT = LVM*QLN*AUH*HSL*HMD*HPL;
    // value: CD43: The actual rate of output from the left ventricle (QLO) when the normalized rate (QLN) is multiplied by various factors that alter the pumping effectiveness of the heart: A multiplier that reduces the effectiveness because of pressure load on the heart (LVM), a factor that changes the effectiveness of the heart because of abnormal left heart strength (HSL), a factor that increases the effectiveness of the heart because of hypertrophy (HPL), a factor that decreases the strength of the heart because of deterioration of the heart in low blood flow states (HMD), and a factor that alters the strength of the heart by increases or decreases in autonomic stimulation (AUH).
    QLO1 = (PLA-PA)/3{mmHg_minute_per_L};
    // value: CD43: The actual rate of output from the left ventricle (QLO) when the normalized rate (QLN) is multiplied by various factors that alter the pumping effectiveness of the heart: A multiplier that reduces the effectiveness because of pressure load on the heart (LVM), a factor that changes the effectiveness of the heart because of abnormal left heart strength (HSL), a factor that increases the effectiveness of the heart because of hypertrophy (HPL), a factor that decreases the strength of the heart because of deterioration of the heart in low blood flow states (HMD), and a factor that alters the strength of the heart by increases or decreases in autonomic stimulation (AUH).
    QLO = sel
      case QLO1 > 0{L_per_minute}:
        QLOT+QLO1;
      otherwise:
        QLOT;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between left_ventricular_output and autonomic_stimulation_effect_on_left_atrial_pressure for
    vars PLA1 and PLA1;
  enddef;
  def map between left_ventricular_output and pumping_effectiveness_of_left_ventricle for
    vars LVM and LVM;
  enddef;
  def map between left_ventricular_output and circulatory_dynamics for
    vars AUH and AUH;
    vars HMD and HMD;
    vars HPL and HPL;
  enddef;
  def map between left_ventricular_output and left_atrial_pressure for
    vars PLA and PLA;
  enddef;
  def map between left_ventricular_output and arterial_pressure_and_pressure_gradient for
    vars PA and PA;
  enddef;
  // PARAMETER CONNECTIONS
  def map between left_ventricular_output and parameter_values for
    vars HSL and HSL;
  enddef;
  // ========================================	SYSTEMIC VENOUS SYSTEM	=============================================

  // value: Containment grouping component for "venous_blood_volume", "angiotensin_induced_venous_constriction", "venous_excess_volume", "venous_average_pressure", "venous_outflow_pressure_into_heart", "resistance_from_veins_to_right_atrium", "rate_of_blood_flow_from_veins_to_right_atrium", "venous_resistance" and "NM_NR_venous_resistance".
  def comp systemic_venous_system as
  enddef;
  // ========================================	VENOUS BLOOD VOLUME	=============================================

  // value: CD11: The rate of change of blood volume in the systemic veins (DVS) is equal to the rate of blood flow into the veins from the arterial tree (QAO) minus the rate of blood flow out of the veins (QVO). CD12: A temporary value is calculated for the instantaneous volume of blood in the veins by integrating the rate of change of the volume in the veins (DVS). CD13: The portion of any change in blood volume that has occurred since the last iteration that is ascribable to volume change in the veins is calculated by multiplying the total volume change (VBD) times a constant. CD14: The instantaneous volume of blood in the veins (VVS) is the sum of the temporary calculation of instantaneous venous volume from CD12 plus the additional venous volume change caused by change in total blood volume as calculated in CD13.
  def comp venous_blood_volume as
    // Inputs from other components
    var QAO: L_per_minute {priv: none, pub: in};
    var QVO: L_per_minute {priv: none, pub: in};
    var VBD: litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VVS: litre {priv: none, pub: out};
    var VVS1: litre {init: 3.28246, priv: none, pub: out};
    // Internal variables
    var DVS: L_per_minute {priv: none, pub: none};
    // value: CD11: The rate of change of blood volume in the systemic veins (DVS) is equal to the rate of blood flow into the veins from the arterial tree (QAO) minus the rate of blood flow out of the veins (QVO).
    DVS = QAO-QVO;
    // value: CD12: A temporary value is calculated for the instantaneous volume of blood in the veins by integrating the rate of change of the volume in the veins (DVS).
    ode(VVS1, time) = DVS;
    // value: CD13: The portion of any change in blood volume that has occurred since the last iteration that is ascribable to volume change in the veins is calculated by multiplying the total volume change (VBD) times a constant. CD14: The instantaneous volume of blood in the veins (VVS) is the sum of the temporary calculation of instantaneous venous volume from CD12 plus the additional venous volume change caused by change in total blood volume as calculated in CD13.
    VVS = VVS1+VBD*0.3986{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between venous_blood_volume and systemic_blood_flow for
    vars QAO and QAO;
  enddef;
  def map between venous_blood_volume and rate_of_blood_flow_from_veins_to_right_atrium for
    vars QVO and QVO;
  enddef;
  def map between venous_blood_volume and total_blood_volume_change for
    vars VBD and VBD;
    vars VVS1 and VVS1;
  enddef;
  def map between venous_blood_volume and circulatory_dynamics for
    vars time and time;
  enddef;
  // ========================================	ANGIOTENSIN-INDUCED VENOUS CONSTRICTION	=============================================

  // value: CD76 and CD77: Calculation of the decrease in excess venous volume caused by angiotensin constriction based on two factors: A multiplier factor caused by changes in concentration of angiotensin in the circulating blood (ANU) and a sensitivity adjustment (ANY).
  def comp angiotensin_induced_venous_constriction as
    // Inputs from other components
    var ANU: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var VVA: litre {priv: none, pub: out};
    // Parameters from parameter_file
    var ANY: litre {priv: none, pub: in};
    // value: CD76 and CD77: Calculation of the decrease in excess venous volume caused by angiotensin constriction based on two factors: A multiplier factor caused by changes in concentration of angiotensin in the circulating blood (ANU) and a sensitivity adjustment (ANY).
    VVA = (ANU-1{dimensionless})*ANY;
  enddef;
  // INPUT CONNECTIONS
  def map between angiotensin_induced_venous_constriction and circulatory_dynamics for
    vars ANU and ANU;
  enddef;
  // PARAMETER CONNECTIONS
  def map between angiotensin_induced_venous_constriction and parameter_values for
    vars ANY and ANY;
  enddef;
  // ========================================	VENOUS EXCESS VOLUME	=============================================

  // value: CD15: The excess volume in the veins (VVE) is calculated by subtracting the maximum volume of blood at zero venous pressure from the actual volume of blood in the systemic venous system (VVS). The maximum volume of blood in the venous system at zero pressure is equal to the sum of several variable factors: a basic volume when all other factors are normal (VVR), changes caused by atrial volume receptor feedback (ATRVFB), changes caused by stress relaxation (VV6 and VV7), and a change in basic volume of the venous system caused by constriction of the venous system in response to circulating angiotensin from block CD77.
  def comp venous_excess_volume as
    // Inputs from other components
    var VVS: litre {priv: none, pub: in};
    var VVR: litre {priv: none, pub: in};
    var VVA: litre {priv: none, pub: in};
    var VV6: litre {priv: none, pub: in};
    var VV7: litre {priv: none, pub: in};
    var ATRVFB: litre {priv: none, pub: in};
    // Outputs to other components
    var VVE: litre {priv: none, pub: out};
    // Internal variables
    var VVE1: litre {priv: none, pub: none};
    // value: CD15: The excess volume in the veins (VVE) is calculated by subtracting the maximum volume of blood at zero venous pressure from the actual volume of blood in the systemic venous system (VVS). The maximum volume of blood in the venous system at zero pressure is equal to the sum of several variable factors: a basic volume when all other factors are normal (VVR), changes caused by atrial volume receptor feedback (ATRVFB), changes caused by stress relaxation (VV6 and VV7), and a change in basic volume of the venous system caused by constriction of the venous system in response to circulating angiotensin from block CD77.
    VVE1 = VVS-VVR-VVA-VV7-VV6-ATRVFB;
    VVE = sel
      case VVE1 < 0.0001{litre}:
        0.0001{litre};
      otherwise:
        VVE1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between venous_excess_volume and venous_blood_volume for
    vars VVS and VVS;
  enddef;
  def map between venous_excess_volume and circulatory_dynamics for
    vars VVR and VVR;
    vars VV6 and VV6;
    vars VV7 and VV7;
    vars ATRVFB and ATRVFB;
  enddef;
  def map between venous_excess_volume and angiotensin_induced_venous_constriction for
    vars VVA and VVA;
  enddef;
  // ========================================	VENOUS AVERAGE PRESSURE	=============================================

  // value: CD16, CD16A, and CD16B: The average pressure in the venous system (PVS) is equal to the excess volume of blood in the veins (VVE) divided by the capacitance of the venous system (CV). The mathematics in these blocks are arranged so that when CV in block CD16A is changed, the blood volume in the venous system does not change at the normal venous pressure level of PVS (+ 3.7 mm Hg). CD16D: This block prevents the average venous pressure (PVS) from falling below .001 mm Hg.
  def comp venous_average_pressure as
    // Inputs from other components
    var VVE: litre {priv: none, pub: in};
    // Outputs to other components
    var PVS: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var CV: L_per_mmHg {priv: none, pub: in};
    // Internal variables
    var PVS1: mmHg {priv: none, pub: none};
    // value: CD16, CD16A, and CD16B: The average pressure in the venous system (PVS) is equal to the excess volume of blood in the veins (VVE) divided by the capacitance of the venous system (CV). The mathematics in these blocks are arranged so that when CV in block CD16A is changed, the blood volume in the venous system does not change at the normal venous pressure level of PVS (+ 3.7 mm Hg).
    PVS1 = 3.7{mmHg}+(VVE-0.74{litre})/CV;
    // value: CD16D: This block prevents the average venous pressure (PVS) from falling below .001 mm Hg.
    PVS = sel
      case PVS1 < 0.0001{mmHg}:
        0.0001{mmHg};
      otherwise:
        PVS1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between venous_average_pressure and venous_excess_volume for
    vars VVE and VVE;
  enddef;
  // PARAMETER CONNECTIONS
  def map between venous_average_pressure and parameter_values for
    vars CV and CV;
  enddef;
  // ========================================	VENOUS OUTFLOW PRESSURE INTO CHEST/HEART	=============================================

  // value: CD25A and CD25B: Calculation of the outflow pressure from the systemic veins into the chest (PR1) which is used for calculating the blood flow through the venous system in CD17. This corrects for the collapse of veins that might occur at entry to the chest when the right atrial pressure is negative, thus maintaining the output pressure from the venous system above a minimum pressure level corresponding to the pressure at which the veins collapse (PRILL).
  def comp venous_outflow_pressure_into_heart as
    // Inputs from other components
    var PRA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var PR1: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var PR1LL: mmHg {priv: none, pub: in};
    // value: CD25A and CD25B: Calculation of the outflow pressure from the systemic veins into the chest (PR1) which is used for calculating the blood flow through the venous system in CD17. This corrects for the collapse of veins that might occur at entry to the chest when the right atrial pressure is negative, thus maintaining the output pressure from the venous system above a minimum pressure level corresponding to the pressure at which the veins collapse (PRILL).
    PR1 = sel
      case PRA < PR1LL:
        PR1LL;
      otherwise:
        PRA;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between venous_outflow_pressure_into_heart and right_atrial_pressure for
    vars PRA and PRA;
  enddef;
  // PARAMETER CONNECTIONS
  def map between venous_outflow_pressure_into_heart and parameter_values for
    vars PR1LL and PR1LL;
  enddef;
  // ========================================	RESISTANCE FROM VEINS TO RIGHT ATRIUM	=============================================

  // value: CD18, CD18A, and CD18B: These blocks calculate the resistance from the large veins to the right atrium (RVS). Block CD18 takes into consideration the effect of the viscosity of the blood (VIM) when the normal value for the viscosity is considered to be 1.0. Block CD18A considers that the resistance (RVS) decreases in proportion to the square root of the level of large vein pressure (PVS). The numerical values in Blocks CD18 and CD18B are proportionality constants. This group of blocks is especially concerned with the reduction of venous resistance when pressure increases the diameter of the veins.
  def comp resistance_from_veins_to_right_atrium as
    // Inputs from other components
    var PVS: mmHg {priv: none, pub: in};
    var VIM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var RVG: mmHg_minute_per_L {priv: none, pub: out};
    // value: CD18, CD18A, and CD18B: These blocks calculate the resistance from the large veins to the right atrium (RVS). Block CD18 takes into consideration the effect of the viscosity of the blood (VIM) when the normal value for the viscosity is considered to be 1.0. Block CD18A considers that the resistance (RVS) decreases in proportion to the square root of the level of large vein pressure (PVS). The numerical values in Blocks CD18 and CD18B are proportionality constants. This group of blocks is especially concerned with the reduction of venous resistance when pressure increases the diameter of the veins.
    RVG = 0.74{mmHg_minute_per_L}/pow(PVS/(VIM*3.7{mmHg}), 0.5{dimensionless});
  enddef;
  // INPUT CONNECTIONS
  def map between resistance_from_veins_to_right_atrium and venous_average_pressure for
    vars PVS and PVS;
  enddef;
  def map between resistance_from_veins_to_right_atrium and circulatory_dynamics for
    vars VIM and VIM;
  enddef;
  // ========================================	RATE OF BLOOD FLOW FROM VEINS TO RIGHT ATRIUM	=============================================

  // value: CD17: The temporary pressure gradient (PGV) from the midpoint of the veins to the exit of the veins into the chest equals the venous pressure (PVS) minus the pressure at the exit point (PR1). CD19: The rate of blood flow out of the veins into the right atrium (QVO) is equal to the pressure gradient through the venous system (PGV) divided by the resistance to blood flow through the venous system (RVS). CD19A: This block provides damping of the value QVO when running on the computer. A damping value of X of 1.0 is no damping. Any higher value causes damping. The value should be equal to 1.0 when studying rapid changes in circulatory dynamics.
  def comp rate_of_blood_flow_from_veins_to_right_atrium as
    // Inputs from other components
    var PVS: mmHg {priv: none, pub: in};
    var PR1: mmHg {priv: none, pub: in};
    var RVG: mmHg_minute_per_L {priv: none, pub: in};
    var QRO: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var QVO: L_per_minute {priv: none, pub: out};
    // Internal variables
    var PGV: mmHg {priv: none, pub: none};
    // value: CD17: The temporary pressure gradient (PGV) from the midpoint of the veins to the exit of the veins into the chest equals the venous pressure (PVS) minus the pressure at the exit point (PR1).
    PGV = PVS-PR1;
    // value: CD19: The rate of blood flow out of the veins into the right atrium (QVO) is equal to the pressure gradient through the venous system (PGV) divided by the resistance to blood flow through the venous system (RVS).
    QVO = PGV/RVG;
    // <apply id="CD19A - DAMPING!!!">
    // 	<eq/>
    // 	<ci>QVO</ci>
    // 	<apply>
    // 		<plus/>
    // 		<ci>QRO</ci>
    // 		<apply>
    // 			<divide/>
    // 			<apply>
    // 				<minus/>
    // 				<ci>QVO</ci>
    // 				<ci>QRO</ci>
    // 			</apply>
    // 			<ci>X</ci>
    // 		</apply>
    // 	</apply>
    // </apply>
  enddef;
  // INPUT CONNECTIONS
  def map between rate_of_blood_flow_from_veins_to_right_atrium and venous_average_pressure for
    vars PVS and PVS;
  enddef;
  def map between rate_of_blood_flow_from_veins_to_right_atrium and venous_outflow_pressure_into_heart for
    vars PR1 and PR1;
  enddef;
  def map between rate_of_blood_flow_from_veins_to_right_atrium and resistance_from_veins_to_right_atrium for
    vars RVG and RVG;
  enddef;
  def map between rate_of_blood_flow_from_veins_to_right_atrium and right_ventricular_output for
    vars QRO and QRO;
  enddef;
  // ========================================	VENOUS RESISTANCE	=============================================

  // value: CD50, CD51, CD52, CD53, CD54, and CD55: A curve-shaping series to calculate a resistance multiplier factor (RV1) from the effect of vascular stretch in the venous system, based on two factors: the input pressure to the venous system from the capillaries (PC) and a basal systemic venous multiplier (RVSM). The damping factor in CD54 slows the response and prevents oscillation of the system. NB - The damping in CD54 has not been coded!!!! CD56: Calculation of the venous resistance (RVS) after modification of the basic venous resistance multiplier factor (RV1) by various other multiplier factors: a multiplier factor for the effect of angiotensin (ANUVN), a multiplier factor for the effect of the autonomic nervous system (AVE), and a multiplier factor for the effect of blood viscosity on venous resistance (VIM).
  def comp venous_resistance as
    // Inputs from other components
    var PC: mmHg {priv: none, pub: in};
    var VIM: dimensionless {priv: none, pub: in};
    var AVE: dimensionless {priv: none, pub: in};
    var ANUVN: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var RVS: mmHg_minute_per_L {priv: none, pub: out};
    // Parameters from parameter_file
    var CN7: dimensionless {priv: none, pub: in};
    var CN2: per_mmHg {priv: none, pub: in};
    var RVSM: mmHg_minute_per_L {priv: none, pub: in};
    // Internal variables
    var CN3: dimensionless {priv: none, pub: none};
    var RV1: mmHg_minute_per_L {priv: none, pub: none};
    // value: CD50, CD51, CD52, CD53, CD54, and CD55: A curve-shaping series to calculate a resistance multiplier factor (RV1) from the effect of vascular stretch in the venous system, based on two factors: the input pressure to the venous system from the capillaries (PC) and a basal systemic venous multiplier (RVSM). The damping factor in CD54 slows the response and prevents oscillation of the system. NB - The damping in CD54 has not been coded!!!!
    CN3 = ((PC-17{mmHg})*CN7+17{mmHg})*CN2;
    // value: CD50, CD51, CD52, CD53, CD54, and CD55: A curve-shaping series to calculate a resistance multiplier factor (RV1) from the effect of vascular stretch in the venous system, based on two factors: the input pressure to the venous system from the capillaries (PC) and a basal systemic venous multiplier (RVSM). The damping factor in CD54 slows the response and prevents oscillation of the system. NB - The damping in CD54 has not been coded!!!!
    RV1 = RVSM/CN3;
    // value: CD56: Calculation of the venous resistance (RVS) after modification of the basic venous resistance multiplier factor (RV1) by various other multiplier factors: a multiplier factor for the effect of angiotensin (ANUVN), a multiplier factor for the effect of the autonomic nervous system (AVE), and a multiplier factor for the effect of blood viscosity on venous resistance (VIM).
    RVS = AVE*RV1*VIM*ANUVN;
  enddef;
  // INPUT CONNECTIONS
  def map between venous_resistance and circulatory_dynamics for
    vars PC and PC;
    vars VIM and VIM;
    vars AVE and AVE;
    vars ANUVN and ANUVN;
  enddef;
  // PARAMETER CONNECTIONS
  def map between venous_resistance and parameter_values for
    vars CN7 and CN7;
    vars CN2 and CN2;
    vars RVSM and RVSM;
  enddef;
  // ========================================	NON-MUSCLE, NON-RENAL VENOUS RESISTANCE	=============================================

  // value: CD57: Calculation of that proportion of the renal venous resistance that is ascribable to blood flow through the systemic circulation besides the muscles and the kidneys, by multiplying the actual venous resistance (RVS) times a proportionality factor.
  def comp NM_NR_venous_resistance as
    // Inputs from other components
    var RVS: mmHg_minute_per_L {priv: none, pub: in};
    // Outputs to other components
    var NNRVR: mmHg_minute_per_L {priv: none, pub: out};
    // value: CD57: Calculation of that proportion of the renal venous resistance that is ascribable to blood flow through the systemic circulation besides the muscles and the kidneys, by multiplying the actual venous resistance (RVS) times a proportionality factor.
    NNRVR = RVS*1.79{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between NM_NR_venous_resistance and venous_resistance for
    vars RVS and RVS;
  enddef;
  // ========================================	SYSTEMIC ARTERIAL SYSTEM	=============================================

  // value: Containment grouping component for "arterial_blood_volume", "arterial_pressure_and_pressure_gradient", "pressure_effect_on_arterial_distention", "NR_systemic_arterial_resistance_multiplier" and "NM_NR_arterial_resistance".
  def comp systemic_arterial_system as
  enddef;
  // ========================================	ARTERIAL BLOOD VOLUME	=============================================

  // value: CD1: The rate of change of blood volume in the aorta (DAS) is equal to the rate of inflow to the aorta from the heart (QLO) minus the rate of outflow from the aorta through the systemic circulation (QAO) plus any flow that occurs passively through the left ventricle (QLO1) because of a left atrial pressure that is greater than aortic pressure, as occurs in the last stages of left ventricular failure. CD2: Integration of the rate of change of volume in the aorta (DAS) gives an output which is a temporary value for the volume of blood in the systemic arteries at any given instant. CD3: This block calculates the portion of any change in blood volume that has occurred since the last iteration (VBD) that is partitioned into the arteries. The remainder is partitioned into other sections of the circulation. CD4: The volume of blood in the arterial tree at any given instant (VAS) is equal to the temporary calculation in volume of blood as described in CD2 plus the portion of a blood volume change as calculated in CD3.
  def comp arterial_blood_volume as
    // Inputs from other components
    var QLO: L_per_minute {priv: none, pub: in};
    var QAO: L_per_minute {priv: none, pub: in};
    var VBD: litre {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var VAS: litre {priv: none, pub: out};
    var VAS1: litre {init: 0.862514, priv: none, pub: out};
    // Internal variables
    var DAS: L_per_minute {priv: none, pub: none};
    // value: CD1: The rate of change of blood volume in the aorta (DAS) is equal to the rate of inflow to the aorta from the heart (QLO) minus the rate of outflow from the aorta through the systemic circulation (QAO) plus any flow that occurs passively through the left ventricle (QLO1) because of a left atrial pressure that is greater than aortic pressure, as occurs in the last stages of left ventricular failure.
    DAS = QLO-QAO;
    // value: CD2: Integration of the rate of change of volume in the aorta (DAS) gives an output which is a temporary value for the volume of blood in the systemic arteries at any given instant.
    ode(VAS1, time) = DAS;
    // value: CD3: This block calculates the portion of any change in blood volume that has occurred since the last iteration (VBD) that is partitioned into the arteries. The remainder is partitioned into other sections of the circulation. CD4: The volume of blood in the arterial tree at any given instant (VAS) is equal to the temporary calculation in volume of blood as described in CD2 plus the portion of a blood volume change as calculated in CD3.
    VAS = VAS1+VBD*0.261{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between arterial_blood_volume and left_ventricular_output for
    vars QLO and QLO;
  enddef;
  def map between arterial_blood_volume and systemic_blood_flow for
    vars QAO and QAO;
  enddef;
  def map between arterial_blood_volume and total_blood_volume_change for
    vars VAS1 and VAS1;
    vars VBD and VBD;
  enddef;
  def map between arterial_blood_volume and circulatory_dynamics for
    vars time and time;
  enddef;
  // ========================================	ARTERIAL PRESSURE AND PRESSURE GRADIENT	=============================================

  // value: CD5: The excess volume in the arterial tree (VAE) over and above the volume that is required to barely fill the aorta at zero pressure is calculated by subtracting a constant (which is equal to "VO") from the instantaneous volume in the aorta (VAS). CD6: Arterial pressure (PA) is equal to the excess volume in the arterial tree (VAE) divided by a constant which is the capacitance of the arterial tree. CD78: The output of this block is the total pressure gradient from the arterial pressure (PA) to the right atrial pressure (PRA).
  def comp arterial_pressure_and_pressure_gradient as
    // Inputs from other components
    var VAS: litre {priv: none, pub: in};
    var PRA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var PA: mmHg {priv: none, pub: out};
    var PAG: mmHg {priv: none, pub: out};
    // Internal variables
    var VAE: litre {priv: none, pub: none};
    // value: CD5: The excess volume in the arterial tree (VAE) over and above the volume that is required to barely fill the aorta at zero pressure is calculated by subtracting a constant (which is equal to "VO") from the instantaneous volume in the aorta (VAS).
    VAE = VAS-0.495{litre};
    // value: CD6: Arterial pressure (PA) is equal to the excess volume in the arterial tree (VAE) divided by a constant which is the capacitance of the arterial tree.
    PA = VAE/0.00355{L_per_mmHg};
    // value: CD78: The output of this block is the total pressure gradient from the arterial pressure (PA) to the right atrial pressure (PRA).
    PAG = PA-PRA;
  enddef;
  // INPUT CONNECTIONS
  def map between arterial_pressure_and_pressure_gradient and arterial_blood_volume for
    vars VAS and VAS;
  enddef;
  def map between arterial_pressure_and_pressure_gradient and right_atrial_pressure for
    vars PRA and PRA;
  enddef;
  // ========================================	PRESSURE EFFECT ON ARTERIAL DISTENTION/RESISTANCE	=============================================

  // value: CD44 and CD45: Calculation of the effect of arterial vascular distension on resistance caused by the arterial pressure itself (PA), giving a multiplier output (PAM) that is then used to calculate the effect of distension on systemic resistance. The exponential factor (PAEX) modifies the extent to which pressure affects the degree of distension on an exponential basis.
  def comp pressure_effect_on_arterial_distention as
    // Inputs from other components
    var PA: mmHg {priv: none, pub: in};
    // Outputs to other components
    var PAM: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var PAEX: dimensionless {priv: none, pub: in};
    // value: CD44 and CD45: Calculation of the effect of arterial vascular distension on resistance caused by the arterial pressure itself (PA), giving a multiplier output (PAM) that is then used to calculate the effect of distension on systemic resistance. The exponential factor (PAEX) modifies the extent to which pressure affects the degree of distension on an exponential basis.
    PAM = pow(PA/100{mmHg}, PAEX);
  enddef;
  // INPUT CONNECTIONS
  def map between pressure_effect_on_arterial_distention and arterial_pressure_and_pressure_gradient for
    vars PA and PA;
  enddef;
  // PARAMETER CONNECTIONS
  def map between pressure_effect_on_arterial_distention and parameter_values for
    vars PAEX and PAEX;
  enddef;
  // ======================================		NON-RENAL SYSTEMIC ARTERIAL RESISTANCE MULTIPLIER		=======================================

  // value: CD46 and CD47: Calculation of the effect of multiple factors on systemic arterial resistance in the muscles and in the soft tissues besides the kidneys to give a multiplier factor (R1). The input factors that contribute to this multiplier factor are: a multiplier factor for the degree of sympathetic stimulation (AUM), a multiplier factor for blood viscosity (VIM), a multiplier factor for the effect of angiotensin on vascular resistance (ANU), a multiplier factor for the effect of antidiuretic hormone (ADHMV), a division factor for the effect of feedback from the atrial stretch receptors (ATRRFB), a division factor caused by dilation of the arteries in response to changes in arterial pressure (PAM), and a multiplier factor (PAMK) for any other effect that might constrict the arteries.
  def comp non_renal_systemic_arterial_resistance_multiplier as
    // Inputs from other components
    var ANU: dimensionless {priv: none, pub: in};
    var ADHMV: dimensionless {priv: none, pub: in};
    var AUM: dimensionless {priv: none, pub: in};
    var VIM: dimensionless {priv: none, pub: in};
    var PAMK: dimensionless {priv: none, pub: in};
    var PAM: dimensionless {priv: none, pub: in};
    var ATRRFB: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var R1: dimensionless {priv: none, pub: out};
    // value: CD46 and CD47: Calculation of the effect of multiple factors on systemic arterial resistance in the muscles and in the soft tissues besides the kidneys to give a multiplier factor (R1). The input factors that contribute to this multiplier factor are: a multiplier factor for the degree of sympathetic stimulation (AUM), a multiplier factor for blood viscosity (VIM), a multiplier factor for the effect of angiotensin on vascular resistance (ANU), a multiplier factor for the effect of antidiuretic hormone (ADHMV), a division factor for the effect of feedback from the atrial stretch receptors (ATRRFB), a division factor caused by dilation of the arteries in response to changes in arterial pressure (PAM), and a multiplier factor (PAMK) for any other effect that might constrict the arteries.
    R1 = ANU*ADHMV*AUM*VIM*PAMK/PAM/ATRRFB;
  enddef;
  // INPUT CONNECTIONS
  def map between non_renal_systemic_arterial_resistance_multiplier and circulatory_dynamics for
    vars ANU and ANU;
    vars ADHMV and ADHMV;
    vars AUM and AUM;
    vars VIM and VIM;
    vars PAMK and PAMK;
    vars ATRRFB and ATRRFB;
  enddef;
  def map between non_renal_systemic_arterial_resistance_multiplier and pressure_effect_on_arterial_distention for
    vars PAM and PAM;
  enddef;
  // ========================================	NON-MUSCLE, NON-RENAL ARTERIAL RESISTANCE	=============================================

  // value: CD49: Modification of the resistance multiplier factor (R1) in the tissues of the body besides the muscles and the kidneys caused by the basic resistance through these tissues (RAR), times the degree of effect of an autoregulation multiplier factor (ARM) caused by autoregulation in these tissues, times RMULT1 for experiments on postulations of very rapid autoregulation, and times MYOGRS for resistance changes caused by myogenic autoregulation.
  def comp NM_NR_arterial_resistance as
    // Inputs from other components
    var R1: dimensionless {priv: none, pub: in};
    var ARM: dimensionless {priv: none, pub: in};
    var MYOGRS: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var NNRAR: mmHg_minute_per_L {priv: none, pub: out};
    // Parameters from parameter_file
    var RAR: mmHg_minute_per_L {priv: none, pub: in};
    var RMULT1: dimensionless {priv: none, pub: in};
    // value: CD49: Modification of the resistance multiplier factor (R1) in the tissues of the body besides the muscles and the kidneys caused by the basic resistance through these tissues (RAR), times the degree of effect of an autoregulation multiplier factor (ARM) caused by autoregulation in these tissues, times RMULT1 for experiments on postulations of very rapid autoregulation, and times MYOGRS for resistance changes caused by myogenic autoregulation.
    NNRAR = RAR*ARM*R1*MYOGRS*RMULT1;
  enddef;
  // INPUT CONNECTIONS
  def map between NM_NR_arterial_resistance and non_renal_systemic_arterial_resistance_multiplier for
    vars R1 and R1;
  enddef;
  def map between NM_NR_arterial_resistance and circulatory_dynamics for
    vars ARM and ARM;
    vars MYOGRS and MYOGRS;
  enddef;
  // PARAMETER CONNECTIONS
  def map between NM_NR_arterial_resistance and parameter_values for
    vars RAR and RAR;
    vars RMULT1 and RMULT1;
  enddef;
  // ========================================	PRESSURE GRADIENT FROM ARTERIES TO VEINS	=============================================

  // value: CD7: The pressure gradient from the aorta to the major veins in the systemic circulation (PGS) is equal to the pressure in the aorta (PA) minus the average pressure in the major veins (PVS).
  def comp pressure_gradient_from_arteries_to_veins as
    // Inputs from other components
    var PA: mmHg {priv: none, pub: in};
    var PVS: mmHg {priv: none, pub: in};
    // Outputs to other components
    var PGS: mmHg {priv: none, pub: out};
    // value: CD7: The pressure gradient from the aorta to the major veins in the systemic circulation (PGS) is equal to the pressure in the aorta (PA) minus the average pressure in the major veins (PVS).
    PGS = PA-PVS;
  enddef;
  // INPUT CONNECTIONS
  def map between pressure_gradient_from_arteries_to_veins and arterial_pressure_and_pressure_gradient for
    vars PA and PA;
  enddef;
  def map between pressure_gradient_from_arteries_to_veins and venous_average_pressure for
    vars PVS and PVS;
  enddef;
  // ========================================	MUSCLE SYSTEMIC RESISTANCE		=============================================

  // value: CD48: Calculation of the resistance through the systemic muscles (RSM) by multiplying the basic resistance through the muscles (RAM) times the multiplier factor calculated in CD47 (R1), times another multiplier factor resulting from local tissue blood flow autoregulation in the muscles (AMM), times RMULT1 for experiments on postulations of very rapid autoregulation, and times MYOGRS for resistance changes caused by possible myogenic autoregulation.
  def comp M_systemic_resistance as
    // Inputs from other components
    var R1: dimensionless {priv: none, pub: in};
    var AMM: dimensionless {priv: none, pub: in};
    var MYOGRS: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var RSM: mmHg_minute_per_L {priv: none, pub: out};
    // Parameters from parameter_file
    var RAM: mmHg_minute_per_L {priv: none, pub: in};
    var RMULT1: dimensionless {priv: none, pub: in};
    // value: CD48: Calculation of the resistance through the systemic muscles (RSM) by multiplying the basic resistance through the muscles (RAM) times the multiplier factor calculated in CD47 (R1), times another multiplier factor resulting from local tissue blood flow autoregulation in the muscles (AMM), times RMULT1 for experiments on postulations of very rapid autoregulation, and times MYOGRS for resistance changes caused by possible myogenic autoregulation.
    RSM = RAM*AMM*R1*MYOGRS*RMULT1;
  enddef;
  // INPUT CONNECTIONS
  def map between M_systemic_resistance and non_renal_systemic_arterial_resistance_multiplier for
    vars R1 and R1;
  enddef;
  def map between M_systemic_resistance and circulatory_dynamics for
    vars AMM and AMM;
    vars MYOGRS and MYOGRS;
  enddef;
  // PARAMETER CONNECTIONS
  def map between M_systemic_resistance and parameter_values for
    vars RAM and RAM;
    vars RMULT1 and RMULT1;
  enddef;
  // ========================================	TOTAL NON-MUSCLE, NON-RENAL SYSTEMIC RESISTANCE	=============================================

  // value: CD58: Calculation of the resistance to blood flow through the nonmuscular and nonkidney portions of the systemic vasculature (RSN) by adding the arterial portion of the resistance as calculated from CD49 and the venous portion of the resistance calculated from CD57.
  def comp total_NM_NR_systemic_resistance as
    // Inputs from other components
    var NNRAR: mmHg_minute_per_L {priv: none, pub: in};
    var NNRVR: mmHg_minute_per_L {priv: none, pub: in};
    // Outputs to other components
    var RSN: mmHg_minute_per_L {priv: none, pub: out};
    // value: CD58: Calculation of the resistance to blood flow through the nonmuscular and nonkidney portions of the systemic vasculature (RSN) by adding the arterial portion of the resistance as calculated from CD49 and the venous portion of the resistance calculated from CD57.
    RSN = NNRAR+NNRVR;
  enddef;
  // INPUT CONNECTIONS
  def map between total_NM_NR_systemic_resistance and NM_NR_arterial_resistance for
    vars NNRAR and NNRAR;
  enddef;
  def map between total_NM_NR_systemic_resistance and NM_NR_venous_resistance for
    vars NNRVR and NNRVR;
  enddef;
  // ========================================	BLOOD FLOW THROUGH MUSCLE TISSUES	=============================================

  // value: CD9: The blood flow through the muscles (BFM) is equal to the pressure gradient through the systemic circulation to the major veins (PGS) divided by the resistance to the blood flow through the muscles (RSM).
  def comp blood_flow_through_M_tissues as
    // Inputs from other components
    var PGS: mmHg {priv: none, pub: in};
    var RSM: mmHg_minute_per_L {priv: none, pub: in};
    // Outputs to other components
    var BFM: L_per_minute {priv: none, pub: out};
    // value: CD9: The blood flow through the muscles (BFM) is equal to the pressure gradient through the systemic circulation to the major veins (PGS) divided by the resistance to the blood flow through the muscles (RSM).
    BFM = PGS/RSM;
  enddef;
  // INPUT CONNECTIONS
  def map between blood_flow_through_M_tissues and pressure_gradient_from_arteries_to_veins for
    vars PGS and PGS;
  enddef;
  def map between blood_flow_through_M_tissues and M_systemic_resistance for
    vars RSM and RSM;
  enddef;
  // ========================================	BLOOD FLOW THROUGH NON-MUSCLE, NON-RENAL TISSUES	=============================================

  // value: CD8: Blood flow through the nonmuscular portions of the body besides the kidneys (BFN) is equal to the pressure gradient through the systemic circulation (PGS) divided by the resistance through the nonmuscular portions of the body besides the kidneys (RSN).
  def comp blood_flow_through_NM_NR_tissues as
    // Inputs from other components
    var PGS: mmHg {priv: none, pub: in};
    var RSN: mmHg_minute_per_L {priv: none, pub: in};
    // Outputs to other components
    var BFN: L_per_minute {priv: none, pub: out};
    // value: CD8: Blood flow through the nonmuscular portions of the body besides the kidneys (BFN) is equal to the pressure gradient through the systemic circulation (PGS) divided by the resistance through the nonmuscular portions of the body besides the kidneys (RSN).
    BFN = PGS/RSN;
  enddef;
  // INPUT CONNECTIONS
  def map between blood_flow_through_NM_NR_tissues and pressure_gradient_from_arteries_to_veins for
    vars PGS and PGS;
  enddef;
  def map between blood_flow_through_NM_NR_tissues and total_NM_NR_systemic_resistance for
    vars RSN and RSN;
  enddef;
  // ========================================	BLOOD FLOW THROUGH AV FISTULAS	=============================================

  // value: CD79: Calculation of the rate of blood flow through a fistula (FISFLO) by multiplying a conductance factor for the fistula (FIS) times the pressure difference from the arteries to the right atrium as calculated by Block CD78.
  def comp blood_flow_through_AV_fistulas as
    // Inputs from other components
    var PAG: mmHg {priv: none, pub: in};
    // Outputs to other components
    var FISFLO: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var FIS: L_per_minute_per_mmHg {priv: none, pub: in};
    // value: CD79: Calculation of the rate of blood flow through a fistula (FISFLO) by multiplying a conductance factor for the fistula (FIS) times the pressure difference from the arteries to the right atrium as calculated by Block CD78.
    FISFLO = PAG*FIS;
  enddef;
  // INPUT CONNECTIONS
  def map between blood_flow_through_AV_fistulas and arterial_pressure_and_pressure_gradient for
    vars PAG and PAG;
  enddef;
  // PARAMETER CONNECTIONS
  def map between blood_flow_through_AV_fistulas and parameter_values for
    vars FIS and FIS;
  enddef;
  // ========================================	SYSTEMIC BLOOD FLOW	=============================================

  // value: CD10: The rate of blood flow out of the arterial tree (QAO) is equal to the blood flow through the muscles (BFM), the blood flow through the nonmuscular portions of the body (BFN), the blood flow through the kidneys (RBF) and the blood flow through any artificial AV fistulas (FISFLO).
  def comp systemic_blood_flow as
    // Inputs from other components
    var BFM: L_per_minute {priv: none, pub: in};
    var BFN: L_per_minute {priv: none, pub: in};
    var RBF: L_per_minute {priv: none, pub: in};
    var FISFLO: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var SYSFLO: L_per_minute {priv: none, pub: out};
    var QAO: L_per_minute {priv: none, pub: out};
    // value: CD10: The rate of blood flow out of the arterial tree (QAO) is equal to the blood flow through the muscles (BFM), the blood flow through the nonmuscular portions of the body (BFN), the blood flow through the kidneys (RBF) and the blood flow through any artificial AV fistulas (FISFLO).
    SYSFLO = BFM+BFN+RBF;
    QAO = SYSFLO+FISFLO;
  enddef;
  // INPUT CONNECTIONS
  def map between systemic_blood_flow and blood_flow_through_M_tissues for
    vars BFM and BFM;
  enddef;
  def map between systemic_blood_flow and blood_flow_through_NM_NR_tissues for
    vars BFN and BFN;
  enddef;
  def map between systemic_blood_flow and circulatory_dynamics for
    vars RBF and RBF;
  enddef;
  def map between systemic_blood_flow and blood_flow_through_AV_fistulas for
    vars FISFLO and FISFLO;
  enddef;
  // ========================================	TOTAL PERIPHERAL RESISTANCE		=============================================

  // value: CD80: The total peripheral resistance (RTP) is equal to the total pressure drop from the arteries to the right atrium (from Block CD78) divided by the total blood flow through the systemic circulation (QAO).
  def comp total_peripheral_resistance as
    // Inputs from other components
    var PAG: mmHg {priv: none, pub: in};
    var QAO: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var RTP: mmHg_minute_per_L {priv: none, pub: out};
    // value: CD80: The total peripheral resistance (RTP) is equal to the total pressure drop from the arteries to the right atrium (from Block CD78) divided by the total blood flow through the systemic circulation (QAO).
    RTP = PAG/QAO;
  enddef;
  // INPUT CONNECTIONS
  def map between total_peripheral_resistance and arterial_pressure_and_pressure_gradient for
    vars PAG and PAG;
  enddef;
  def map between total_peripheral_resistance and systemic_blood_flow for
    vars QAO and QAO;
  enddef;
  // ============================================================		PARAMETER VALUES		===============================================================

  def comp parameter_values as
    var HTAUML: dimensionless {init: 0.4, priv: none, pub: out};
    // autonomic sensitivity on PRA [P]
    var QRF: L_per_minute {init: 0.15, priv: none, pub: out};
    // left ventricle funct effect on right ventricle function [P]
    var HSR: dimensionless {init: 1, priv: none, pub: out};
    // basic strength of right ventricle
    var HSL: dimensionless {init: 1, priv: none, pub: out};
    // basic strength of left ventricle
    var ANY: litre {init: -0.2, priv: none, pub: out};
    // sensitivity controller of ANU for venous volume [P]
    var CV: L_per_mmHg {init: 0.1, priv: none, pub: out};
    // venous compliance [P]
    var PR1LL: mmHg {init: 0, priv: none, pub: out};
    // PR1 lower limit [P]
    var RVSM: mmHg_minute_per_L {init: 1, priv: none, pub: out};
    // basal systemic venous multiplier [P]
    var CN2: per_mmHg {init: 0.0212, priv: none, pub: out};
    // curve fitting coefficient, calculation of CN3 [P]
    var CN7: dimensionless {init: 0.2, priv: none, pub: out};
    // curve fitting coefficient, calculation of CN3 [P]
    var PAEX: dimensionless {init: 2, priv: none, pub: out};
    // exponential factor affecting PAM [P]
    var RAR: mmHg_minute_per_L {init: 30.52, priv: none, pub: out};
    // basal non-muscle vascular resistance [P]
    var RMULT1: dimensionless {init: 1, priv: none, pub: out};
    // very rapid autoregulation multiplier (if AUTO > 0)
    var RAM: mmHg_minute_per_L {init: 96.3, priv: none, pub: out};
    // basal muscle vascular resistance [P]
    var FIS: L_per_minute_per_mmHg {init: 0, priv: none, pub: out};
    // fistula conductance factor
  enddef;
  // ============================================================		GROUPING		===============================================================

  def group as containment for
    comp circulatory_dynamics incl
      comp total_blood_volume_change;
      comp right_atrium incl
        comp right_atrial_blood_volume;
        comp right_atrial_pressure;
        comp autonomic_stimulation_effect_on_right_atrial_pressure;
      endcomp;
      comp right_ventricle incl
        comp pressure_effect_on_right_ventricular_pumping;
        comp pumping_effectiveness_of_right_ventricle;
        comp right_ventricular_output;
      endcomp;
      comp pulmonary_vasculature incl
        comp pulmonary_vasculature_blood_volume;
        comp pulmonary_vasculature_pressure;
        comp pulmonary_arterial_resistance;
        comp pulmonary_venous_resistance;
        comp total_pulmonary_vascular_resistance;
        comp pressure_gradient_through_the_lungs;
        comp rate_of_blood_flow_from_pulmonary_veins_to_left_atrium;
      endcomp;
      comp left_atrium incl
        comp left_atrial_blood_volume;
        comp left_atrial_pressure;
        comp autonomic_stimulation_effect_on_left_atrial_pressure;
      endcomp;
      comp left_ventricle incl
        comp pumping_effectiveness_of_left_ventricle;
        comp left_ventricular_output;
      endcomp;
      comp systemic_venous_system incl
        comp venous_blood_volume;
        comp angiotensin_induced_venous_constriction;
        comp venous_excess_volume;
        comp venous_average_pressure;
        comp venous_outflow_pressure_into_heart;
        comp resistance_from_veins_to_right_atrium;
        comp rate_of_blood_flow_from_veins_to_right_atrium;
        comp venous_resistance;
        comp NM_NR_venous_resistance;
      endcomp;
      comp systemic_arterial_system incl
        comp arterial_blood_volume;
        comp arterial_pressure_and_pressure_gradient;
        comp pressure_effect_on_arterial_distention;
        comp non_renal_systemic_arterial_resistance_multiplier;
        comp NM_NR_arterial_resistance;
      endcomp;
      comp pressure_gradient_from_arteries_to_veins;
      comp M_systemic_resistance;
      comp total_NM_NR_systemic_resistance;
      comp blood_flow_through_M_tissues;
      comp blood_flow_through_NM_NR_tissues;
      comp blood_flow_through_AV_fistulas;
      comp systemic_blood_flow;
      comp total_peripheral_resistance;
    endcomp;
  enddef;

  def group as encapsulation for
    comp circulatory_dynamics incl
      comp parameter_values;
      comp total_blood_volume_change;
      comp right_atrium;
      comp right_atrial_blood_volume;
      comp right_atrial_pressure;
      comp autonomic_stimulation_effect_on_right_atrial_pressure;
      comp right_ventricle;
      comp pressure_effect_on_right_ventricular_pumping;
      comp pumping_effectiveness_of_right_ventricle;
      comp right_ventricular_output;
      comp pulmonary_vasculature;
      comp pulmonary_vasculature_blood_volume;
      comp pulmonary_vasculature_pressure;
      comp pulmonary_arterial_resistance;
      comp pulmonary_venous_resistance;
      comp total_pulmonary_vascular_resistance;
      comp pressure_gradient_through_the_lungs;
      comp rate_of_blood_flow_from_pulmonary_veins_to_left_atrium;
      comp left_atrium;
      comp left_atrial_blood_volume;
      comp left_atrial_pressure;
      comp autonomic_stimulation_effect_on_left_atrial_pressure;
      comp left_ventricle;
      comp pumping_effectiveness_of_left_ventricle;
      comp left_ventricular_output;
      comp systemic_venous_system;
      comp venous_blood_volume;
      comp angiotensin_induced_venous_constriction;
      comp venous_excess_volume;
      comp venous_average_pressure;
      comp venous_outflow_pressure_into_heart;
      comp resistance_from_veins_to_right_atrium;
      comp rate_of_blood_flow_from_veins_to_right_atrium;
      comp venous_resistance;
      comp NM_NR_venous_resistance;
      comp systemic_arterial_system;
      comp arterial_blood_volume;
      comp arterial_pressure_and_pressure_gradient;
      comp pressure_effect_on_arterial_distention;
      comp non_renal_systemic_arterial_resistance_multiplier;
      comp NM_NR_arterial_resistance;
      comp pressure_gradient_from_arteries_to_veins;
      comp M_systemic_resistance;
      comp total_NM_NR_systemic_resistance;
      comp blood_flow_through_M_tissues;
      comp blood_flow_through_NM_NR_tissues;
      comp blood_flow_through_AV_fistulas;
      comp systemic_blood_flow;
      comp total_peripheral_resistance;
    endcomp;
  enddef;
  // SIMULATION METADATA
enddef;
// #CD35A
// value: CD35A: Damping of QPO to allow rapid computation of long-term hemodynamics. When the value U equals 1.0 there is no damping. Any larger value for U provides proportionate damping.
// #CD19A
// value: CD19A: This block provides damping of the value QVO when running on the computer. A damping value of X of 1.0 is no damping. Any higher value causes damping. The value should be equal to 1.0 when studying rapid changes in circulatory dynamics.
