// This CellML file was generated on 23/11/2009 at 9:23:44 at a.m. using:
//
// COR (0.9.31.1333)
// Copyright 2002-2009 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// creator: gnunns1@jhu.edu; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; Family Nunns; Given Geoffrey; Other Rogan
// created: W3CDTF 2009-12-01
// reference: volume 26; last_page 139; title Minimal haemodynamic system model including ventricular interaction and valve dynamics.; title Medical Engineering and Physics; Family Smith; Given Bram; Other W; Family Chase; Given J; Other Geoffrey; Family Nokes; Given Roger; Other I; Family Shaw; Given Geoffrey; Other M; Family Wake; Given Graeme; W3CDTF 2004-03-26; first_page 131; Pubmed_id 15036180
// reference: subject_type keyword; _1 cardiovascular circulation
// title: The Smith et al. 2004 minimal haemodynamic system model including valve mechanics and ventricular interactions
// comment: FN Geoffrey Nunns; This is the CellML description of Smith et al.'s 2004 minimal haemodynamic system model including valve mechanics and ventricular interactions
// species: Human
// bio_entity: heart
// simulation: pointDensity 10000; endingValue 2; maximumStepSize 0.1
def model smith_chase_nokes_shaw_wake_2004 as
  // Minimal haemodynamic system model including ventricular interaction and valve dynamics.
  //
  // Geoffrey Nunns
  //
  // Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model will run in PCEnv and OpenCell to recreate the published results. Note that the model will not run in COR because it contains differential algebraic equations (DAEs). The CellML transaltion of the model is based on the original Matlab code obtained from the model authors. However, the CellML model will only simulate 14 heart beats, because if statements (piecewise equations) were used instead of a remainder operator to cycle the heart beat, but this number of beats can be increased if desired.
  //
  // Model Structure
  //
  // Abstract: Characterising circulatory dysfunction and choosing a suitable treatment is often difficult and time consuming, and can result in a deterioration in patient condition, or unsuitable therapy choices. A stable minimal model of the human cardiovascular system (CVS) is developed with the ultimate specific aim of assisting medical staff for rapid, on site modelling to assist in diagnosis and treatment. Models found in the literature simulate specific areas of the CVS with limited direct usefulness to medical staff. Others model the full CVS as a closed loop system, but they were found to be very complex, difficult to solve, or unstable. This paper develops a model that uses a minimal number of governing equations with the primary goal of accurately capturing trends in the CVS dynamics in a simple, easily solved, robust model. The model is shown to have long term stability and consistency with non-specific initial conditions as a result. An "open on pressure close on flow" valve law is created to capture the effects of inertia and the resulting dynamics of blood flow through the cardiac valves. An accurate, stable solution is performed using a method that varies the number of states in the model depending on the specific phase of the cardiac cycle, better matching the real physiological conditions. Examples of results include a 9% drop in cardiac output when increasing the thoracic pressure from -4 to 0 mmHg, and an increase in blood pressure from 120/80 to 165/130 mmHg when the systemic resistance is doubled. These results show that the model adequately provides appropriate magnitudes and trends that are in agreement with existing data for a variety of physiologically verified test cases simulating human CVS function.
  //
  // The complete original paper reference is cited below:
  //
  // Minimal haemodynamic system model including ventricular interaction and valve dynamics, Bram W Smith, J Geoffrey Chase, Roger I Nokes, Geoffrey M Shaw, Graeme Wake, 2004, Medical Engineering and Physics, 26, 131-139. PubMed ID: 15036180 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=15036180&dopt=Abstract)
  //
  // model diagram
  //
  // Schematic diagram of the minimal closed loop model of the cardiovascular system.
  def unit kPa as
    unit pascal {pref: kilo};
  enddef;
  def unit mL as
    unit liter {pref: milli};
  enddef;
  def unit per_mL as
    unit liter {expo: -1, pref: milli};
  enddef;
  def unit kPa_per_mL as
    unit kPa;
    unit per_mL;
  enddef;
  def unit kPa_second_per_mL as
    unit pascal {pref: kilo};
    unit second;
    unit mL {expo: -1};
  enddef;
  def unit mL_per_second as
    unit mL;
    unit second {expo: -1};
  enddef;
  def unit mL_per_second2 as
    unit mL;
    unit second {expo: -2};
  enddef;
  def unit per_second2 as
    unit second {expo: -2};
  enddef;
  def unit kPa_second2_per_mL as
    unit pascal {pref: kilo};
    unit second {expo: 2};
    unit mL {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp heart_parameters as
    var R_mt: kPa_second_per_mL {init: 0.0158, pub: out};
    var R_av: kPa_second_per_mL {init: 0.0180, pub: out};
    var R_tc: kPa_second_per_mL {init: 0.0237, pub: out};
    var R_pv: kPa_second_per_mL {init: 0.0055, pub: out};
    var R_pul: kPa_second_per_mL {init: 0.1552, pub: out};
    var R_sys: kPa_second_per_mL {init: 1.0889, pub: out};
    var L_tc: kPa_second2_per_mL {init: 8.0093e-5, pub: out};
    var L_pv: kPa_second2_per_mL {init: 1.4868e-4, pub: out};
    var L_mt: kPa_second2_per_mL {init: 7.6968e-5, pub: out};
    var L_av: kPa_second2_per_mL {init: 1.2189e-4, pub: out};
    var V_tot: mL {init: 5.5, pub: out};
    var P_th: kPa {init: -4, pub: out};
  enddef;

  def comp driver_function as
    var e_t: dimensionless {pub: out};
    var time: second {pub: in};
    var A: dimensionless {init: 1};
    var B: per_second2 {init: 80};
    var C: second {init: 0.375};
    var tau: second;
    var period: second {init: 0.75};
    tau = sel
      case time <= period:
        time;
      case time <= period*2{dimensionless}:
        time-period;
      case time <= period*3{dimensionless}:
        time-period*2{dimensionless};
      case time <= period*4{dimensionless}:
        time-period*3{dimensionless};
      case time <= period*5{dimensionless}:
        time-period*4{dimensionless};
      case time <= period*6{dimensionless}:
        time-period*5{dimensionless};
      case time <= period*7{dimensionless}:
        time-period*6{dimensionless};
      case time <= period*8{dimensionless}:
        time-period*7{dimensionless};
      case time <= period*9{dimensionless}:
        time-period*8{dimensionless};
      case time <= period*10{dimensionless}:
        time-period*9{dimensionless};
      case time <= period*11{dimensionless}:
        time-period*10{dimensionless};
      case time <= period*12{dimensionless}:
        time-period*11{dimensionless};
      case time <= period*13{dimensionless}:
        time-period*12{dimensionless};
    endsel;
    e_t = A*exp(-B*sqr(tau-C));
  enddef;

  def comp pericardium as
    var V_pcd: mL {pub: out};
    var P_pcd: kPa {pub: out};
    var P_peri: kPa {pub: out};
    var V_lv: mL {pub: in};
    var V_rv: mL {pub: in};
    var P_th: kPa {pub: in};
    var P_0_pcd: kPa {init: 0.5003};
    var V_0_pcd: mL {init: 200};
    var lambda_pcd: per_mL {init: 0.03};
    V_pcd = V_lv+V_rv;
    P_pcd = P_0_pcd*(exp(lambda_pcd*(V_pcd-V_0_pcd))-1{dimensionless});
    P_peri = P_pcd+P_th;
  enddef;

  def comp left_ventricle as
    var V_lvf: mL {priv: out, pub: out};
    var P_lvf: kPa {pub: out};
    var P_lv: kPa {pub: out};
    var V_lv: mL {init: 94.6812, pub: out};
    var time: second {pub: in};
    var V_spt: mL {pub: in};
    var e_t: dimensionless {pub: in};
    var P_peri: kPa {pub: in};
    var P_es_lvf: kPa {priv: in};
    var P_ed_lvf: kPa {priv: in};
    var R_mt: kPa_second_per_mL {pub: in};
    var R_av: kPa_second_per_mL {pub: in};
    var P_pu: kPa {pub: in};
    var P_ao: kPa {pub: in};
    var E_es_lvf: kPa_per_mL {priv: in, pub: out};
    var lambda_lvf: per_mL {priv: in, pub: out};
    var P_0_lvf: kPa {priv: in, pub: out};
    var Q_mt: mL_per_second {pub: in};
    var Q_av: mL_per_second {pub: in};
    V_lvf = V_lv-V_spt;
    P_lvf = e_t*P_es_lvf+(1{dimensionless}-e_t)*P_ed_lvf;
    P_lv = P_lvf+P_peri;
    ode(V_lv, time) = sel
      case (Q_mt < 0{mL_per_second}) and (Q_av < 0{mL_per_second}):
        0{mL_per_second};
      case Q_mt < 0{mL_per_second}:
        -Q_av;
      case Q_av < 0{mL_per_second}:
        Q_mt;
      otherwise:
        Q_mt-Q_av;
    endsel;
  enddef;

  def comp lvf_calculator as
    var P_es_lvf: kPa {pub: out};
    var P_ed_lvf: kPa {pub: out};
    var E_es_lvf: kPa_per_mL {init: 2.8798, pub: out};
    var V_lvf: mL {pub: in};
    var V_d_lvf: mL {init: 0};
    var P_0_lvf: kPa {init: 0.1203, pub: out};
    var lambda_lvf: per_mL {init: 0.033, pub: out};
    var V_0_lvf: mL {init: 0};
    P_es_lvf = E_es_lvf*(V_lvf-V_d_lvf);
    P_ed_lvf = P_0_lvf*(exp(lambda_lvf*(V_lvf-V_0_lvf))-1{dimensionless});
  enddef;

  def comp right_ventricle as
    var V_rvf: mL {priv: out, pub: out};
    var P_rvf: kPa {pub: out};
    var P_rv: kPa {pub: out};
    var V_rv: mL {init: 90.7302, pub: out};
    var time: second {pub: in};
    var V_spt: mL {pub: in};
    var e_t: dimensionless {pub: in};
    var P_peri: kPa {pub: in};
    var P_es_rvf: kPa {priv: in};
    var P_ed_rvf: kPa {priv: in};
    var R_tc: kPa_second_per_mL {pub: in};
    var R_pv: kPa_second_per_mL {pub: in};
    var P_pa: kPa {pub: in};
    var P_vc: kPa {pub: in};
    var E_es_rvf: kPa_per_mL {priv: in, pub: out};
    var lambda_rvf: per_mL {priv: in, pub: out};
    var P_0_rvf: kPa {priv: in, pub: out};
    var Q_tc: mL_per_second {pub: in};
    var Q_pv: mL_per_second {pub: in};
    V_rvf = V_rv+V_spt;
    P_rvf = e_t*P_es_rvf+(1{dimensionless}-e_t)*P_ed_rvf;
    P_rv = P_rvf+P_peri;
    ode(V_rv, time) = sel
      case (Q_tc < 0{mL_per_second}) and (Q_pv < 0{mL_per_second}):
        0{mL_per_second};
      case Q_tc < 0{mL_per_second}:
        -Q_pv;
      case Q_pv < 0{mL_per_second}:
        Q_tc;
      otherwise:
        Q_tc-Q_pv;
    endsel;
  enddef;

  def comp rvf_calculator as
    var P_es_rvf: kPa {pub: out};
    var P_ed_rvf: kPa {pub: out};
    var E_es_rvf: kPa_per_mL {init: 0.585, pub: out};
    var V_rvf: mL {pub: in};
    var V_d_rvf: mL {init: 0};
    var P_0_rvf: kPa {init: 0.2157, pub: out};
    var lambda_rvf: per_mL {init: 0.023, pub: out};
    var V_0_rvf: mL {init: 0};
    P_es_rvf = E_es_rvf*(V_rvf-V_d_rvf);
    P_ed_rvf = P_0_rvf*(exp(lambda_rvf*(V_rvf-V_0_rvf))-1{dimensionless});
  enddef;

  def comp septum as
    var V_spt: mL {pub: out};
    var P_lv: kPa {pub: in};
    var P_rv: kPa {pub: in};
    var e_t: dimensionless {pub: in};
    var E_es_spt: kPa_per_mL {init: 48.754};
    var V_d_spt: mL {init: 2};
    var P_0_spt: kPa {init: 1.1101};
    var lambda_spt: per_mL {init: 0.435};
    var V_0_spt: mL {init: 2};
    var one: dimensionless {init: 1};
    var E_es_lvf: kPa_per_mL {pub: in};
    var P_0_lvf: kPa {pub: in};
    var lambda_lvf: per_mL {pub: in};
    var V_lv: mL {pub: in};
    var E_es_rvf: kPa_per_mL {pub: in};
    var P_0_rvf: kPa {pub: in};
    var V_rv: mL {pub: in};
    var lambda_rvf: per_mL {pub: in};
    0{kPa} = e_t*E_es_spt*(V_spt-V_d_spt)+(one-e_t)*P_0_spt*(exp(lambda_spt*(V_spt-V_0_spt))-one)-e_t*E_es_lvf*(V_lv-V_spt)-(1{dimensionless}-e_t)*P_0_lvf*(exp(lambda_lvf*(V_lv-V_spt))-1{dimensionless})+e_t*E_es_rvf*(V_rv+V_spt)+(1{dimensionless}-e_t)*P_0_rvf*(exp(lambda_rvf*(V_rv+V_spt))-1{dimensionless});
  enddef;

  def comp pulmonary_artery as
    var P_pa: kPa {pub: out};
    var time: second {pub: in};
    var E_es_pa: kPa_per_mL {init: 0.369};
    var V_pa: mL {init: 43.0123};
    var V_d_pa: mL {init: 0};
    var R_pv: kPa_second_per_mL {pub: in};
    var R_pul: kPa_second_per_mL {pub: in};
    var P_th: kPa {pub: in};
    var P_rv: kPa {pub: in};
    var P_pu: kPa {pub: in};
    var Q_pul: mL_per_second {pub: in};
    var Q_pv: mL_per_second {pub: in};
    P_pa = E_es_pa*(V_pa-V_d_pa)+P_th;
    ode(V_pa, time) = sel
      case Q_pv < 0{mL_per_second}:
        -Q_pul;
      otherwise:
        Q_pv-Q_pul;
    endsel;
  enddef;

  def comp pulmonary_vein as
    var P_pu: kPa {pub: out};
    var time: second {pub: in};
    var E_es_pu: kPa_per_mL {init: 0.0073};
    var V_pu: mL {init: 808.4579};
    var V_d_pu: mL {init: 0};
    var R_pul: kPa_second_per_mL {pub: in};
    var R_mt: kPa_second_per_mL {pub: in};
    var P_th: kPa {pub: in};
    var P_pa: kPa {pub: in};
    var P_lv: kPa {pub: in};
    var Q_mt: mL_per_second {pub: in};
    var Q_pul: mL_per_second {pub: in};
    P_pu = E_es_pu*(V_pu-V_d_pu)+P_th;
    ode(V_pu, time) = sel
      case Q_mt < 0{mL_per_second}:
        Q_pul;
      otherwise:
        Q_pul-Q_mt;
    endsel;
  enddef;

  def comp aorta as
    var P_ao: kPa {pub: out};
    var time: second {pub: in};
    var E_es_ao: kPa_per_mL {init: 0.6913};
    var V_ao: mL {init: 133.3381};
    var V_d_ao: mL {init: 0};
    var R_av: kPa_second_per_mL {pub: in};
    var R_sys: kPa_second_per_mL {pub: in};
    var P_lv: kPa {pub: in};
    var P_vc: kPa {pub: in};
    var Q_av: mL_per_second {pub: in};
    var Q_sys: mL_per_second {pub: in};
    P_ao = E_es_ao*(V_ao-V_d_ao);
    ode(V_ao, time) = sel
      case Q_av < 0{mL_per_second}:
        -Q_sys;
      otherwise:
        Q_av-Q_sys;
    endsel;
  enddef;

  def comp vena_cava as
    var P_vc: kPa {pub: out};
    var time: second {pub: in};
    var E_es_vc: kPa_per_mL {init: 0.0059};
    var V_vc: mL {init: 329.7803};
    var V_d_vc: mL {init: 0};
    var R_sys: kPa_second_per_mL {pub: in};
    var R_tc: kPa_second_per_mL {pub: in};
    var P_ao: kPa {pub: in};
    var P_rv: kPa {pub: in};
    var Q_sys: mL_per_second {pub: in};
    var Q_tc: mL_per_second {pub: in};
    P_vc = E_es_vc*(V_vc-V_d_vc);
    ode(V_vc, time) = sel
      case Q_tc < 0{mL_per_second}:
        Q_sys;
      otherwise:
        Q_sys-Q_tc;
    endsel;
  enddef;

  def comp flow as
    var Q_sys: mL_per_second {pub: out};
    var Q_pul: mL_per_second {pub: out};
    var Q_mt: mL_per_second {init: 245.5813, pub: out};
    var Q_av: mL_per_second {init: 0, pub: out};
    var Q_tc: mL_per_second {init: 190.0661, pub: out};
    var Q_pv: mL_per_second {init: 0, pub: out};
    var time: second {pub: in};
    var P_ao: kPa {pub: in};
    var P_vc: kPa {pub: in};
    var P_pa: kPa {pub: in};
    var P_pu: kPa {pub: in};
    var P_rv: kPa {pub: in};
    var P_lv: kPa {pub: in};
    var R_sys: kPa_second_per_mL {pub: in};
    var R_pul: kPa_second_per_mL {pub: in};
    var R_mt: kPa_second_per_mL {pub: in};
    var R_av: kPa_second_per_mL {pub: in};
    var R_tc: kPa_second_per_mL {pub: in};
    var R_pv: kPa_second_per_mL {pub: in};
    var L_mt: kPa_second2_per_mL {pub: in};
    var L_av: kPa_second2_per_mL {pub: in};
    var L_tc: kPa_second2_per_mL {pub: in};
    var L_pv: kPa_second2_per_mL {pub: in};
    Q_sys = (P_ao-P_vc)/R_sys;
    Q_pul = (P_pa-P_pu)/R_pul;
    ode(Q_mt, time) = sel
      case (P_pu-P_lv < 0{kPa}) and (Q_mt < 0{mL_per_second}):
        0{mL_per_second2};
      otherwise:
        (P_pu-P_lv-Q_mt*R_mt)/L_mt;
    endsel;
    ode(Q_av, time) = sel
      case (P_lv-P_ao < 0{kPa}) and (Q_av < 0{mL_per_second}):
        0{mL_per_second2};
      otherwise:
        (P_lv-P_ao-Q_av*R_av)/L_av;
    endsel;
    ode(Q_tc, time) = sel
      case (P_vc-P_rv < 0{kPa}) and (Q_tc < 0{mL_per_second}):
        0{mL_per_second2};
      otherwise:
        (P_vc-P_rv-Q_tc*R_tc)/L_tc;
    endsel;
    ode(Q_pv, time) = sel
      case (P_rv-P_pa < 0{kPa}) and (Q_pv < 0{mL_per_second}):
        0{mL_per_second2};
      otherwise:
        (P_rv-P_pa-Q_pv*R_pv)/L_pv;
    endsel;
  enddef;

  def group as encapsulation for
    comp left_ventricle incl
      comp lvf_calculator;
    endcomp;
    comp right_ventricle incl
      comp rvf_calculator;
    endcomp;
  enddef;
  def map between environment and driver_function for
    vars time and time;
  enddef;
  def map between environment and left_ventricle for
    vars time and time;
  enddef;
  def map between environment and right_ventricle for
    vars time and time;
  enddef;
  def map between environment and pulmonary_artery for
    vars time and time;
  enddef;
  def map between environment and pulmonary_vein for
    vars time and time;
  enddef;
  def map between environment and aorta for
    vars time and time;
  enddef;
  def map between environment and vena_cava for
    vars time and time;
  enddef;
  def map between environment and flow for
    vars time and time;
  enddef;
  def map between driver_function and left_ventricle for
    vars e_t and e_t;
  enddef;
  def map between driver_function and right_ventricle for
    vars e_t and e_t;
  enddef;
  def map between driver_function and septum for
    vars e_t and e_t;
  enddef;
  def map between septum and left_ventricle for
    vars P_lv and P_lv;
    vars V_lv and V_lv;
    vars V_spt and V_spt;
    vars E_es_lvf and E_es_lvf;
    vars lambda_lvf and lambda_lvf;
    vars P_0_lvf and P_0_lvf;
  enddef;
  def map between septum and right_ventricle for
    vars P_rv and P_rv;
    vars V_rv and V_rv;
    vars V_spt and V_spt;
    vars E_es_rvf and E_es_rvf;
    vars lambda_rvf and lambda_rvf;
    vars P_0_rvf and P_0_rvf;
  enddef;
  def map between pericardium and left_ventricle for
    vars V_lv and V_lv;
    vars P_peri and P_peri;
  enddef;
  def map between pericardium and right_ventricle for
    vars V_rv and V_rv;
    vars P_peri and P_peri;
  enddef;
  def map between left_ventricle and lvf_calculator for
    vars P_ed_lvf and P_ed_lvf;
    vars P_es_lvf and P_es_lvf;
    vars V_lvf and V_lvf;
    vars E_es_lvf and E_es_lvf;
    vars lambda_lvf and lambda_lvf;
    vars P_0_lvf and P_0_lvf;
  enddef;
  def map between right_ventricle and rvf_calculator for
    vars P_ed_rvf and P_ed_rvf;
    vars P_es_rvf and P_es_rvf;
    vars V_rvf and V_rvf;
    vars E_es_rvf and E_es_rvf;
    vars lambda_rvf and lambda_rvf;
    vars P_0_rvf and P_0_rvf;
  enddef;
  def map between heart_parameters and left_ventricle for
    vars R_mt and R_mt;
    vars R_av and R_av;
  enddef;
  def map between heart_parameters and right_ventricle for
    vars R_tc and R_tc;
    vars R_pv and R_pv;
  enddef;
  def map between heart_parameters and pulmonary_artery for
    vars R_pv and R_pv;
    vars R_pul and R_pul;
    vars P_th and P_th;
  enddef;
  def map between heart_parameters and pulmonary_vein for
    vars R_mt and R_mt;
    vars R_pul and R_pul;
    vars P_th and P_th;
  enddef;
  def map between heart_parameters and aorta for
    vars R_av and R_av;
    vars R_sys and R_sys;
  enddef;
  def map between heart_parameters and vena_cava for
    vars R_sys and R_sys;
    vars R_tc and R_tc;
  enddef;
  def map between heart_parameters and pericardium for
    vars P_th and P_th;
  enddef;
  def map between heart_parameters and flow for
    vars R_pul and R_pul;
    vars R_pv and R_pv;
    vars R_tc and R_tc;
    vars R_mt and R_mt;
    vars R_av and R_av;
    vars R_sys and R_sys;
    vars L_tc and L_tc;
    vars L_pv and L_pv;
    vars L_mt and L_mt;
    vars L_av and L_av;
  enddef;
  def map between left_ventricle and pulmonary_vein for
    vars P_lv and P_lv;
    vars P_pu and P_pu;
  enddef;
  def map between left_ventricle and aorta for
    vars P_lv and P_lv;
    vars P_ao and P_ao;
  enddef;
  def map between right_ventricle and pulmonary_artery for
    vars P_rv and P_rv;
    vars P_pa and P_pa;
  enddef;
  def map between right_ventricle and vena_cava for
    vars P_rv and P_rv;
    vars P_vc and P_vc;
  enddef;
  def map between pulmonary_vein and pulmonary_artery for
    vars P_pu and P_pu;
    vars P_pa and P_pa;
  enddef;
  def map between aorta and vena_cava for
    vars P_ao and P_ao;
    vars P_vc and P_vc;
  enddef;
  def map between aorta and flow for
    vars P_ao and P_ao;
    vars Q_sys and Q_sys;
    vars Q_av and Q_av;
  enddef;
  def map between vena_cava and flow for
    vars P_vc and P_vc;
    vars Q_sys and Q_sys;
    vars Q_tc and Q_tc;
  enddef;
  def map between pulmonary_vein and flow for
    vars P_pu and P_pu;
    vars Q_mt and Q_mt;
    vars Q_pul and Q_pul;
  enddef;
  def map between pulmonary_artery and flow for
    vars P_pa and P_pa;
    vars Q_pul and Q_pul;
    vars Q_pv and Q_pv;
  enddef;
  def map between left_ventricle and flow for
    vars P_lv and P_lv;
    vars Q_mt and Q_mt;
    vars Q_av and Q_av;
  enddef;
  def map between right_ventricle and flow for
    vars P_rv and P_rv;
    vars Q_tc and Q_tc;
    vars Q_pv and Q_pv;
  enddef;
enddef;
