// This CellML file was generated on 17/02/2009 at 11:44:00 at a.m. using:
//
// COR (0.9.31.1175)
// Copyright 2002-2009 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// comment: FN Jeelean Lim; This CellML version of the model runs in PCEnv and COR to produce graphs that are similar in shape but not in magnitude to the graphs in figure 3 of the published paper. This could possibly be due to a missing variable k55 in the equation for cdk1_c. The units have been checked and are consistent.
// created: W3CDTF 2009-02-17T00:00:00+00:00
// creator: Orgname University of Auckland; Orgunit Bioengineering Institute; jlim063@aucklanduni.ac.nz; Given Jeelean; Family Lim
// reference: subject_type keyword; cell cycle
// reference: Pubmed_id 17432928; volume 3; title Cell Size at S Phase Initiation: An Emergent Property of the G1/S Network; W3CDTF 2007-02-00 00:00; title PLoS Computational Biology; Given Matteo; Family Barberis; Given Edda; Family Klipp; Given Marco; Family Vanoni; Given Lilia; Family Alberghina
// comment: FN Jeelean Lim; This is the CellML version of Barberis et al's 2007 model describing cell size at S Phase initiation: an emergent property of the G1/S network
def model barberis_klipp_vanoni_alberghina_version01 as
  // Cell Size at S Phase Initiation: An Emergent Property of the G1/S Network
  //
  // Jeelean Lim
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML version of the model runs in PCEnv and COR to produce graphs that are similar in shape but not in magnitude to the graphs in figure 3 of the published paper. This could possibly be due to a missing variable k55 in the equation for cdk1_c. The units have been checked and are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: The eukaryotic cell cycle is the repeated sequence of events that enable the division of a cell into two daughter cells. It is divided into four phases: G1, S, G2, and M. Passage through the cell cycle is strictly regulated by a molecular interaction network, which involves the periodic synthesis and destruction of cyclins that bind and activate cyclindependent kinases that are present in nonlimiting amounts. Cyclin-dependent kinase inhibitors contribute to cell cycle control.
  //
  // Budding yeast is an established model organism for cell cycle studies, and several mathematical models have been proposed for its cell cycle. An area of major relevance in cell cycle control is the G1 to S transition. In any given growth condition, it is characterized by the requirement of a specific, critical cell size, PS, to enter S phase. The molecular basis of this control is still under discussion.
  //
  // The authors report a mathematical model of the G1 to S network that newly takes into account nucleo/cytoplasmic localization, the role of the cyclin-dependent kinase Sic1 in facilitating nuclear import of its cognate Cdk1-Clb5, Whi5 control, and carbon source regulation of Sic1 and Sic1- containing complexes. The model was implemented by a set of ordinary differential equations that describe the temporal change of the concentration of the involved proteins and protein complexes. The model was tested by simulation in several genetic and nutritional setups and was found to be neatly consistent with experimental data. To estimate PS, the authors developed a hybrid model including a probabilistic component for firing of DNA replication origins. Sensitivity analysis of PS provides a novel relevant conclusion: PS is an emergent property of the G1 to S network that strongly depends on growth rate.
  //
  // The complete original paper reference is cited below:
  //
  // Cell Size at S Phase Initiation: An Emergent Property of the G1/S Network (http://www.ploscompbiol.org/article/info:doi/10.1371/journal.pcbi.0030064), Matteo Barberis, Edda Klipp, Marco Vanoni, Lilia Alberghina, 2007, PLOS Computational Biology (http://www.ploscompbiol.org/home.action;jsessionid=645EF1CFEC82DFB57D328F551865F7A6). (A PDF version of the article is available to subscribers on the journal website.) PubMed ID: 17432928 (http://www.ncbi.nlm.nih.gov/pubmed/17432928)
  //
  // figure1
  //
  // Main Events That Occur during the Yeast Cell Cycle
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;
  def unit flux as
    unit nanomolar;
    unit minute {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit nanomolar {expo: -1};
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  def comp v_c as
    var v_c: nanomolar {init: 0.5, pub: out};
    var dv_c_dt: flux {pub: in};
    var time: minute {pub: in};
    ode(v_c, time) = dv_c_dt;
  enddef;

  def comp dv_c_dt as
    var dv_c_dt: flux {pub: out};
    var v_c: nanomolar {pub: in};
    var k_growth: first_order_rate_constant {pub: in};
    dv_c_dt = k_growth*v_c;
  enddef;

  def comp v_n as
    var v_n: nanomolar {init: 0.5, pub: out};
    var time: minute {pub: in};
    ode(v_n, time) = 0{flux};
  enddef;

  def comp k_volume as
    var k_volume: dimensionless {pub: out};
    var v_n: nanomolar {pub: in};
    var v_c: nanomolar {pub: in};
    k_volume = v_n/v_c;
  enddef;

  def comp mcln2_c as
    var mcln2_c: nanomolar {init: 0, pub: out};
    var k_50: first_order_rate_constant {pub: in};
    var k_10: first_order_rate_constant {pub: in};
    var mcln2_n: nanomolar {pub: in};
    var k_volume: dimensionless {pub: in};
    var v_c: nanomolar {pub: in};
    var dv_c_dt: flux {pub: in};
    var time: minute {pub: in};
    ode(mcln2_c, time) = k_50*mcln2_n*k_volume-k_10*mcln2_c-dv_c_dt/v_c*mcln2_c;
  enddef;

  def comp mclb5_c as
    var mclb5_c: nanomolar {init: 0, pub: out};
    var k_51: first_order_rate_constant {pub: in};
    var k_11: first_order_rate_constant {pub: in};
    var mclb5_n: nanomolar {pub: in};
    var k_volume: dimensionless {pub: in};
    var v_c: nanomolar {pub: in};
    var dv_c_dt: flux {pub: in};
    var time: minute {pub: in};
    ode(mclb5_c, time) = k_51*mclb5_n*k_volume-k_11*mclb5_c-dv_c_dt/v_c*mclb5_c;
  enddef;

  def comp mcln2_n as
    var mcln2_n: nanomolar {init: 0, pub: out};
    var k_1: first_order_rate_constant {pub: in};
    var k_50: first_order_rate_constant {pub: in};
    var sbf_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(mcln2_n, time) = k_1*sbf_n-k_50*mcln2_n;
  enddef;

  def comp mclb5_n as
    var mclb5_n: nanomolar {init: 0, pub: out};
    var k_2: first_order_rate_constant {pub: in};
    var k_51: first_order_rate_constant {pub: in};
    var sbf_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(mclb5_n, time) = k_2*sbf_n-k_51*mclb5_n;
  enddef;

  def comp sbf_n as
    var sbf_n: nanomolar {init: 0, pub: out};
    var k_39: first_order_rate_constant {pub: in};
    var k_34: second_order_rate_constant {pub: in};
    var k_35: first_order_rate_constant {pub: in};
    var sbfwhi5p_n: nanomolar {pub: in};
    var whi5_n: nanomolar {pub: in};
    var sbfwhi5_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(sbf_n, time) = k_39*sbfwhi5p_n-k_34*sbf_n*whi5_n+k_35*sbfwhi5_n;
  enddef;

  def comp cln3_c as
    var cln3_c: nanomolar {init: 0.000485, pub: out};
    var k_6: flux {pub: in};
    var k_43: first_order_rate_constant {pub: in};
    var k_15: first_order_rate_constant {pub: in};
    var v_c: nanomolar {pub: in};
    var dv_c_dt: flux {pub: in};
    var time: minute {pub: in};
    ode(cln3_c, time) = k_6-k_43*cln3_c-k_15*cln3_c-dv_c_dt/v_c*cln3_c;
  enddef;

  def comp cln2_c as
    var cln2_c: nanomolar {init: 0, pub: out};
    var k_3: first_order_rate_constant {pub: in};
    var k_26: second_order_rate_constant {pub: in};
    var k_27: first_order_rate_constant {pub: in};
    var k_12: first_order_rate_constant {pub: in};
    var mcln2_c: nanomolar {pub: in};
    var cdk1_c: nanomolar {pub: in};
    var cdk1cln2_c: nanomolar {pub: in};
    var v_c: nanomolar {pub: in};
    var dv_c_dt: flux {pub: in};
    var time: minute {pub: in};
    ode(cln2_c, time) = k_3*mcln2_c-k_26*cdk1_c*cln2_c+k_27*cdk1cln2_c-k_12*cln2_c-dv_c_dt/v_c*cln2_c;
  enddef;

  def comp clb5_c as
    var clb5_c: nanomolar {init: 0, pub: out};
    var k_4: first_order_rate_constant {pub: in};
    var k_28: second_order_rate_constant {pub: in};
    var k_29: first_order_rate_constant {pub: in};
    var k_13: first_order_rate_constant {pub: in};
    var mclb5_c: nanomolar {pub: in};
    var cdk1_c: nanomolar {pub: in};
    var cdk1clb5_c: nanomolar {pub: in};
    var v_c: nanomolar {pub: in};
    var dv_c_dt: flux {pub: in};
    var time: minute {pub: in};
    ode(clb5_c, time) = k_4*mclb5_c-k_28*clb5_c*cdk1_c+k_29*cdk1clb5_c-k_13*clb5_c-dv_c_dt/v_c*clb5_c;
  enddef;

  def comp cdk1_c as
    var cdk1_c: nanomolar {init: 0.333333, pub: out};
    var k_7: flux {pub: in};
    var k_44: first_order_rate_constant {pub: in};
    var k_49: first_order_rate_constant {pub: in};
    var k_27: first_order_rate_constant {pub: in};
    var k_26: second_order_rate_constant {pub: in};
    var k_28: second_order_rate_constant {pub: in};
    var k_29: first_order_rate_constant {pub: in};
    var k_16: first_order_rate_constant {pub: in};
    var cdk1_n: nanomolar {pub: in};
    var cdk1cln2_c: nanomolar {pub: in};
    var cln2_c: nanomolar {pub: in};
    var clb5_c: nanomolar {pub: in};
    var cdk1clb5_c: nanomolar {pub: in};
    var v_c: nanomolar {pub: in};
    var dv_c_dt: flux {pub: in};
    var time: minute {pub: in};
    ode(cdk1_c, time) = k_7-k_44*cdk1_c+k_49*cdk1_n+k_27*cdk1cln2_c-k_26*cdk1_c*cln2_c-k_28*cdk1_c*clb5_c+k_29*cdk1clb5_c-k_16*cdk1_c-dv_c_dt/v_c*cdk1_c;
  enddef;

  def comp cln3_n as
    var cln3_n: nanomolar {init: 0, pub: out};
    var k_24: second_order_rate_constant {pub: in};
    var k_43: first_order_rate_constant {pub: in};
    var k_25: first_order_rate_constant {pub: in};
    var k_20: first_order_rate_constant {pub: in};
    var cln3_c: nanomolar {pub: in};
    var k_volume: dimensionless {pub: in};
    var cdk1_n: nanomolar {pub: in};
    var cdk1cln3_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(cln3_n, time) = k_43*cln3_c/k_volume-k_24*cln3_n*cdk1_n+k_25*cdk1cln3_n-k_20*cln3_n;
  enddef;

  def comp cdk1_n as
    var cdk1_n: nanomolar {init: 0.0074127, pub: out};
    var k_44: first_order_rate_constant {pub: in};
    var k_49: first_order_rate_constant {pub: in};
    var k_24: second_order_rate_constant {pub: in};
    var k_25: first_order_rate_constant {pub: in};
    var k_21: first_order_rate_constant {pub: in};
    var k_volume: dimensionless {pub: in};
    var cdk1_c: nanomolar {pub: in};
    var cln3_n: nanomolar {pub: in};
    var cdk1cln3_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(cdk1_n, time) = k_44*cdk1_c/k_volume-k_49*cdk1_n-k_24*cln3_n*cdk1_n+k_25*cdk1cln3_n-k_21*cdk1_n;
  enddef;

  def comp cdk1cln2_c as
    var cdk1cln2_c: nanomolar {init: 0, pub: out};
    var k_26: second_order_rate_constant {pub: in};
    var k_27: first_order_rate_constant {pub: in};
    var k_46: first_order_rate_constant {pub: in};
    var k_53: first_order_rate_constant {pub: in};
    var cdk1_c: nanomolar {pub: in};
    var cln2_c: nanomolar {pub: in};
    var cdk1cln2_n: nanomolar {pub: in};
    var k_volume: dimensionless {pub: in};
    var v_c: nanomolar {pub: in};
    var dv_c_dt: flux {pub: in};
    var time: minute {pub: in};
    ode(cdk1cln2_c, time) = k_26*cdk1_c*cln2_c-k_27*cdk1cln2_c-k_46*cdk1cln2_c+k_53*cdk1cln2_n*k_volume-dv_c_dt/v_c*cdk1cln2_c;
  enddef;

  def comp cdk1clb5_c as
    var cdk1clb5_c: nanomolar {init: 0, pub: out};
    var k_28: second_order_rate_constant {pub: in};
    var k_29: first_order_rate_constant {pub: in};
    var k_33: first_order_rate_constant {pub: in};
    var k_32: second_order_rate_constant {pub: in};
    var k_48: first_order_rate_constant {pub: in};
    var cdk1_c: nanomolar {pub: in};
    var clb5_c: nanomolar {pub: in};
    var cdk1cln2_n: nanomolar {pub: in};
    var cdk1clb5sic1_c: nanomolar {pub: in};
    var sic1_c: nanomolar {pub: in};
    var v_c: nanomolar {pub: in};
    var dv_c_dt: flux {pub: in};
    var time: minute {pub: in};
    ode(cdk1clb5_c, time) = k_28*cdk1_c*clb5_c-k_29*cdk1clb5_c+k_33*cdk1clb5sic1_c-k_32*sic1_c*cdk1clb5_c-k_48*cdk1clb5_c-dv_c_dt/v_c*cdk1clb5_c;
  enddef;

  def comp cdk1cln2_n as
    var cdk1cln2_n: nanomolar {init: 0, pub: out};
    var k_46: first_order_rate_constant {pub: in};
    var k_53: first_order_rate_constant {pub: in};
    var cdk1cln2_c: nanomolar {pub: in};
    var k_volume: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(cdk1cln2_n, time) = k_46*cdk1cln2_c/k_volume-k_53*cdk1cln2_n;
  enddef;

  def comp cdk1clb5_n as
    var cdk1clb5_n: nanomolar {init: 0, pub: out};
    var k_41: first_order_rate_constant {pub: in};
    var k_48: first_order_rate_constant {pub: in};
    var cdk1clb5sic1p_n: nanomolar {pub: in};
    var cdk1clb5_c: nanomolar {pub: in};
    var k_volume: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(cdk1clb5_n, time) = k_41*cdk1clb5sic1p_n+k_48*cdk1clb5_c/k_volume;
  enddef;

  def comp cdk1cln3_n as
    var cdk1cln3_n: nanomolar {init: 0, pub: out};
    var k_24: second_order_rate_constant {pub: in};
    var k_25: first_order_rate_constant {pub: in};
    var k_31: first_order_rate_constant {pub: in};
    var k_30: second_order_rate_constant {pub: in};
    var k_40: first_order_rate_constant {pub: in};
    var cln3_n: nanomolar {pub: in};
    var cdk1_n: nanomolar {pub: in};
    var cdk1cln3far1_n: nanomolar {pub: in};
    var far1_n: nanomolar {pub: in};
    var cdk1cln3far1p_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(cdk1cln3_n, time) = k_24*cln3_n*cdk1_n-k_25*cdk1cln3_n+k_31*cdk1cln3far1_n-k_30*far1_n*cdk1cln3_n+k_40*cdk1cln3far1p_n;
  enddef;

  def comp sbfwhi5_n as
    var sbfwhi5_n: nanomolar {init: 0.025544, pub: out};
    var k_34: second_order_rate_constant {pub: in};
    var k_35: first_order_rate_constant {pub: in};
    var k_36: second_order_rate_constant {pub: in};
    var sbf_n: nanomolar {pub: in};
    var whi5_n: nanomolar {pub: in};
    var cdk1cln3_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(sbfwhi5_n, time) = k_34*sbf_n*whi5_n-k_35*sbfwhi5_n-k_36*sbfwhi5_n*cdk1cln3_n;
  enddef;

  def comp sbfwhi5p_n as
    var sbfwhi5p_n: nanomolar {init: 0, pub: out};
    var k_36: second_order_rate_constant {pub: in};
    var k_39: first_order_rate_constant {pub: in};
    var sbfwhi5_n: nanomolar {pub: in};
    var cdk1cln3_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(sbfwhi5p_n, time) = k_36*sbfwhi5_n*cdk1cln3_n-k_39*sbfwhi5p_n;
  enddef;

  def comp cdk1cln3far1_n as
    var cdk1cln3far1_n: nanomolar {init: 0, pub: out};
    var k_30: second_order_rate_constant {pub: in};
    var k_31: first_order_rate_constant {pub: in};
    var k_37: second_order_rate_constant {pub: in};
    var far1_n: nanomolar {pub: in};
    var cdk1cln3_n: nanomolar {pub: in};
    var cdk1cln2_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(cdk1cln3far1_n, time) = k_30*far1_n*cdk1cln3_n-k_31*cdk1cln3far1_n-k_37*cdk1cln3far1_n*cdk1cln2_n;
  enddef;

  def comp cdk1clb5sic1_n as
    var cdk1clb5sic1_n: nanomolar {init: 0, pub: out};
    var k_47: first_order_rate_constant {pub: in};
    var k_38: second_order_rate_constant {pub: in};
    var cdk1clb5sic1_c: nanomolar {pub: in};
    var k_volume: dimensionless {pub: in};
    var cdk1cln2_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(cdk1clb5sic1_n, time) = k_47*cdk1clb5sic1_c/k_volume-k_38*cdk1clb5sic1_n*cdk1cln2_n;
  enddef;

  def comp cdk1clb5sic1p_n as
    var cdk1clb5sic1p_n: nanomolar {init: 0, pub: out};
    var k_41: first_order_rate_constant {pub: in};
    var k_38: second_order_rate_constant {pub: in};
    var cdk1clb5sic1_n: nanomolar {pub: in};
    var cdk1cln2_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(cdk1clb5sic1p_n, time) = k_38*cdk1clb5sic1_n*cdk1cln2_n-k_41*cdk1clb5sic1p_n;
  enddef;

  def comp cdk1cln3far1p_n as
    var cdk1cln3far1p_n: nanomolar {init: 0, pub: out};
    var k_37: second_order_rate_constant {pub: in};
    var k_40: first_order_rate_constant {pub: in};
    var cdk1cln3far1_n: nanomolar {pub: in};
    var cdk1cln2_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(cdk1cln3far1p_n, time) = k_37*cdk1cln3far1_n*cdk1cln2_n-k_40*cdk1cln3far1p_n;
  enddef;

  def comp cdk1clb5sic1_c as
    var cdk1clb5sic1_c: nanomolar {init: 0, pub: out};
    var k_32: second_order_rate_constant {pub: in};
    var k_33: first_order_rate_constant {pub: in};
    var k_47: first_order_rate_constant {pub: in};
    var sic1_c: nanomolar {pub: in};
    var cdk1clb5_c: nanomolar {pub: in};
    var v_c: nanomolar {pub: in};
    var dv_c_dt: flux {pub: in};
    var time: minute {pub: in};
    ode(cdk1clb5sic1_c, time) = k_32*sic1_c*cdk1clb5_c-k_33*cdk1clb5sic1_c-k_47*cdk1clb5sic1_c-dv_c_dt/v_c*cdk1clb5sic1_c;
  enddef;

  def comp sic1_c as
    var sic1_c: nanomolar {init: 0.039234, pub: out};
    var k_9: flux {pub: in};
    var k_32: second_order_rate_constant {pub: in};
    var k_33: first_order_rate_constant {pub: in};
    var k_18: first_order_rate_constant {pub: in};
    var cdk1clb5_c: nanomolar {pub: in};
    var cdk1clb5sic1_c: nanomolar {pub: in};
    var v_c: nanomolar {pub: in};
    var dv_c_dt: flux {pub: in};
    var time: minute {pub: in};
    ode(sic1_c, time) = k_9-k_32*sic1_c*cdk1clb5_c+k_33*cdk1clb5sic1_c-k_18*sic1_c-dv_c_dt/v_c*sic1_c;
  enddef;

  def comp whi5_c as
    var whi5_c: nanomolar {init: 0.073564, pub: out};
    var k_8: flux {pub: in};
    var k_45: first_order_rate_constant {pub: in};
    var k_17: first_order_rate_constant {pub: in};
    var v_c: nanomolar {pub: in};
    var dv_c_dt: flux {pub: in};
    var time: minute {pub: in};
    ode(whi5_c, time) = k_8-k_45*whi5_c-k_17*whi5_c-dv_c_dt/v_c*whi5_c;
  enddef;

  def comp far1_c as
    var far1_c: nanomolar {init: 0.0037926, pub: out};
    var k_5: flux {pub: in};
    var k_42: first_order_rate_constant {pub: in};
    var k_14: first_order_rate_constant {pub: in};
    var v_c: nanomolar {pub: in};
    var dv_c_dt: flux {pub: in};
    var time: minute {pub: in};
    ode(far1_c, time) = k_5-k_42*far1_c-k_14*far1_c-dv_c_dt/v_c*far1_c;
  enddef;

  def comp whi5p_c as
    var whi5p_c: nanomolar {init: 0, pub: out};
    var k_52: first_order_rate_constant {pub: in};
    var whi5p_n: nanomolar {pub: in};
    var k_volume: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(whi5p_c, time) = k_52*whi5p_n*k_volume;
  enddef;

  def comp sic1P_n as
    var sic1P_n: nanomolar {init: 0, pub: out};
    var k_41: first_order_rate_constant {pub: in};
    var cdk1clb5sic1p_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(sic1P_n, time) = k_41*cdk1clb5sic1p_n;
  enddef;

  def comp far1P_n as
    var far1P_n: nanomolar {init: 0, pub: out};
    var k_40: first_order_rate_constant {pub: in};
    var cdk1cln3far1p_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(far1P_n, time) = k_40*cdk1cln3far1p_n;
  enddef;

  def comp whi5_n as
    var whi5_n: nanomolar {init: 0, pub: out};
    var k_45: first_order_rate_constant {pub: in};
    var k_34: second_order_rate_constant {pub: in};
    var k_22: first_order_rate_constant {pub: in};
    var whi5_c: nanomolar {pub: in};
    var k_volume: dimensionless {pub: in};
    var sbf_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(whi5_n, time) = k_45*whi5_c/k_volume-k_34*whi5_n*sbf_n-k_22*whi5_n;
  enddef;

  def comp far1_n as
    var far1_n: nanomolar {init: 0, pub: out};
    var k_42: first_order_rate_constant {pub: in};
    var k_30: second_order_rate_constant {pub: in};
    var k_31: first_order_rate_constant {pub: in};
    var k_19: first_order_rate_constant {pub: in};
    var far1_c: nanomolar {pub: in};
    var k_volume: dimensionless {pub: in};
    var cdk1cln3_n: nanomolar {pub: in};
    var cdk1cln3far1_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(far1_n, time) = k_42*far1_c/k_volume-k_30*far1_n*cdk1cln3_n+k_31*cdk1cln3far1_n-k_19*far1_n;
  enddef;

  def comp whi5p_n as
    var whi5p_n: nanomolar {init: 0, pub: out};
    var k_39: first_order_rate_constant {pub: in};
    var k_52: first_order_rate_constant {pub: in};
    var k_23: first_order_rate_constant {pub: in};
    var sbfwhi5p_n: nanomolar {pub: in};
    var time: minute {pub: in};
    ode(whi5p_n, time) = k_39*sbfwhi5p_n-k_52*whi5p_n-k_23*whi5p_n;
  enddef;

  def comp rate_constants as
    var k_1: first_order_rate_constant {init: 0.03523, pub: out};
    var k_2: first_order_rate_constant {init: 0.03523, pub: out};
    var k_3: first_order_rate_constant {init: 0.32, pub: out};
    var k_4: first_order_rate_constant {init: 0.32, pub: out};
    var k_5: flux {init: 0.000042, pub: out};
    var k_6: flux {init: 0.00001, pub: out};
    var k_7: flux {init: 0.01, pub: out};
    var k_8: flux {init: 0.00004, pub: out};
    var k_9: flux {init: 0.00005, pub: out};
    var k_10: first_order_rate_constant {init: 0.12, pub: out};
    var k_11: first_order_rate_constant {init: 0.12, pub: out};
    var k_12: first_order_rate_constant {init: 0.1, pub: out};
    var k_13: first_order_rate_constant {init: 0.35, pub: out};
    var k_14: first_order_rate_constant {init: 0.01, pub: out};
    var k_15: first_order_rate_constant {init: 0.01, pub: out};
    var k_16: first_order_rate_constant {init: 0.03, pub: out};
    var k_17: first_order_rate_constant {init: 0.01, pub: out};
    var k_18: first_order_rate_constant {init: 0.0008, pub: out};
    var k_19: first_order_rate_constant {init: 0.01, pub: out};
    var k_20: first_order_rate_constant {init: 0.01, pub: out};
    var k_21: first_order_rate_constant {init: 0, pub: out};
    var k_22: first_order_rate_constant {init: 0.01, pub: out};
    var k_23: first_order_rate_constant {init: 0.01, pub: out};
    var k_24: second_order_rate_constant {init: 2.82, pub: out};
    var k_25: first_order_rate_constant {init: 0.55, pub: out};
    var k_26: second_order_rate_constant {init: 2.82, pub: out};
    var k_27: first_order_rate_constant {init: 0.55, pub: out};
    var k_28: second_order_rate_constant {init: 2.82, pub: out};
    var k_29: first_order_rate_constant {init: 0.55, pub: out};
    var k_30: second_order_rate_constant {init: 42300, pub: out};
    var k_31: first_order_rate_constant {init: 0.55, pub: out};
    var k_32: second_order_rate_constant {init: 84.6, pub: out};
    var k_33: first_order_rate_constant {init: 0.55, pub: out};
    var k_34: second_order_rate_constant {init: 8.46, pub: out};
    var k_35: first_order_rate_constant {init: 0.0005, pub: out};
    var k_36: second_order_rate_constant {init: 4363.6, pub: out};
    var k_37: second_order_rate_constant {init: 4363.6, pub: out};
    var k_38: second_order_rate_constant {init: 4363.6, pub: out};
    var k_39: first_order_rate_constant {init: 1, pub: out};
    var k_40: first_order_rate_constant {init: 1, pub: out};
    var k_41: first_order_rate_constant {init: 1, pub: out};
    var k_42: first_order_rate_constant {init: 0.005, pub: out};
    var k_43: first_order_rate_constant {init: 0.005, pub: out};
    var k_44: first_order_rate_constant {init: 0.005, pub: out};
    var k_45: first_order_rate_constant {init: 0.005, pub: out};
    var k_46: first_order_rate_constant {init: 0.1, pub: out};
    var k_47: first_order_rate_constant {init: 1, pub: out};
    var k_48: first_order_rate_constant {init: 0.012, pub: out};
    var k_49: first_order_rate_constant {init: 0.001, pub: out};
    var k_50: first_order_rate_constant {init: 0.6, pub: out};
    var k_51: first_order_rate_constant {init: 0.6, pub: out};
    var k_52: first_order_rate_constant {init: 0.005, pub: out};
    var k_53: first_order_rate_constant {init: 0.001, pub: out};
    var k_growth: first_order_rate_constant {init: 0.0051, pub: out};
  enddef;
  def map between v_c and environment for
    vars time and time;
  enddef;
  def map between v_n and environment for
    vars time and time;
  enddef;
  def map between mcln2_c and environment for
    vars time and time;
  enddef;
  def map between mclb5_c and environment for
    vars time and time;
  enddef;
  def map between mcln2_n and environment for
    vars time and time;
  enddef;
  def map between mclb5_n and environment for
    vars time and time;
  enddef;
  def map between cln3_c and environment for
    vars time and time;
  enddef;
  def map between cln2_c and environment for
    vars time and time;
  enddef;
  def map between clb5_c and environment for
    vars time and time;
  enddef;
  def map between cdk1_c and environment for
    vars time and time;
  enddef;
  def map between cln3_n and environment for
    vars time and time;
  enddef;
  def map between cdk1_n and environment for
    vars time and time;
  enddef;
  def map between cdk1cln2_c and environment for
    vars time and time;
  enddef;
  def map between cdk1clb5_c and environment for
    vars time and time;
  enddef;
  def map between cdk1cln2_n and environment for
    vars time and time;
  enddef;
  def map between cdk1clb5_n and environment for
    vars time and time;
  enddef;
  def map between cdk1cln3_n and environment for
    vars time and time;
  enddef;
  def map between sbfwhi5_n and environment for
    vars time and time;
  enddef;
  def map between sbfwhi5p_n and environment for
    vars time and time;
  enddef;
  def map between cdk1cln3far1_n and environment for
    vars time and time;
  enddef;
  def map between cdk1clb5sic1_n and environment for
    vars time and time;
  enddef;
  def map between cdk1clb5sic1p_n and environment for
    vars time and time;
  enddef;
  def map between cdk1cln3far1p_n and environment for
    vars time and time;
  enddef;
  def map between cdk1clb5sic1_c and environment for
    vars time and time;
  enddef;
  def map between sic1_c and environment for
    vars time and time;
  enddef;
  def map between whi5_c and environment for
    vars time and time;
  enddef;
  def map between far1_c and environment for
    vars time and time;
  enddef;
  def map between whi5p_c and environment for
    vars time and time;
  enddef;
  def map between sic1P_n and environment for
    vars time and time;
  enddef;
  def map between far1P_n and environment for
    vars time and time;
  enddef;
  def map between whi5_n and environment for
    vars time and time;
  enddef;
  def map between far1_n and environment for
    vars time and time;
  enddef;
  def map between whi5p_n and environment for
    vars time and time;
  enddef;
  def map between sbf_n and environment for
    vars time and time;
  enddef;
  def map between dv_c_dt and rate_constants for
    vars k_growth and k_growth;
  enddef;
  def map between k_volume and v_n for
    vars v_n and v_n;
  enddef;
  def map between k_volume and v_c for
    vars v_c and v_c;
  enddef;
  def map between dv_c_dt and v_c for
    vars v_c and v_c;
    vars dv_c_dt and dv_c_dt;
  enddef;
  def map between mcln2_c and rate_constants for
    vars k_50 and k_50;
    vars k_10 and k_10;
  enddef;
  def map between mcln2_c and mcln2_n for
    vars mcln2_n and mcln2_n;
  enddef;
  def map between mcln2_c and k_volume for
    vars k_volume and k_volume;
  enddef;
  def map between mcln2_c and v_c for
    vars v_c and v_c;
  enddef;
  def map between mcln2_c and dv_c_dt for
    vars dv_c_dt and dv_c_dt;
  enddef;
  def map between mclb5_c and rate_constants for
    vars k_51 and k_51;
    vars k_11 and k_11;
  enddef;
  def map between mclb5_c and mclb5_n for
    vars mclb5_n and mclb5_n;
  enddef;
  def map between mclb5_c and k_volume for
    vars k_volume and k_volume;
  enddef;
  def map between mclb5_c and v_c for
    vars v_c and v_c;
  enddef;
  def map between mclb5_c and dv_c_dt for
    vars dv_c_dt and dv_c_dt;
  enddef;
  def map between mcln2_n and rate_constants for
    vars k_1 and k_1;
    vars k_50 and k_50;
  enddef;
  def map between mcln2_n and sbf_n for
    vars sbf_n and sbf_n;
  enddef;
  def map between mclb5_n and rate_constants for
    vars k_2 and k_2;
    vars k_51 and k_51;
  enddef;
  def map between mclb5_n and sbf_n for
    vars sbf_n and sbf_n;
  enddef;
  def map between sbf_n and rate_constants for
    vars k_39 and k_39;
    vars k_34 and k_34;
    vars k_35 and k_35;
  enddef;
  def map between sbf_n and sbfwhi5p_n for
    vars sbfwhi5p_n and sbfwhi5p_n;
  enddef;
  def map between sbf_n and whi5_n for
    vars whi5_n and whi5_n;
    vars sbf_n and sbf_n;
  enddef;
  def map between sbf_n and sbfwhi5_n for
    vars sbfwhi5_n and sbfwhi5_n;
    vars sbf_n and sbf_n;
  enddef;
  def map between cln3_c and rate_constants for
    vars k_6 and k_6;
    vars k_43 and k_43;
    vars k_15 and k_15;
  enddef;
  def map between cln3_c and v_c for
    vars v_c and v_c;
  enddef;
  def map between cln3_c and dv_c_dt for
    vars dv_c_dt and dv_c_dt;
  enddef;
  def map between cln2_c and rate_constants for
    vars k_3 and k_3;
    vars k_26 and k_26;
    vars k_27 and k_27;
    vars k_12 and k_12;
  enddef;
  def map between cln2_c and mcln2_c for
    vars mcln2_c and mcln2_c;
  enddef;
  def map between cln2_c and cdk1_c for
    vars cdk1_c and cdk1_c;
    vars cln2_c and cln2_c;
  enddef;
  def map between cln2_c and cdk1cln2_c for
    vars cdk1cln2_c and cdk1cln2_c;
    vars cln2_c and cln2_c;
  enddef;
  def map between cln2_c and v_c for
    vars v_c and v_c;
  enddef;
  def map between cln2_c and dv_c_dt for
    vars dv_c_dt and dv_c_dt;
  enddef;
  def map between clb5_c and rate_constants for
    vars k_4 and k_4;
    vars k_28 and k_28;
    vars k_29 and k_29;
    vars k_13 and k_13;
  enddef;
  def map between clb5_c and mclb5_c for
    vars mclb5_c and mclb5_c;
  enddef;
  def map between clb5_c and cdk1_c for
    vars cdk1_c and cdk1_c;
    vars clb5_c and clb5_c;
  enddef;
  def map between clb5_c and cdk1clb5_c for
    vars cdk1clb5_c and cdk1clb5_c;
    vars clb5_c and clb5_c;
  enddef;
  def map between clb5_c and v_c for
    vars v_c and v_c;
  enddef;
  def map between clb5_c and dv_c_dt for
    vars dv_c_dt and dv_c_dt;
  enddef;
  def map between cdk1_c and rate_constants for
    vars k_7 and k_7;
    vars k_44 and k_44;
    vars k_49 and k_49;
    vars k_27 and k_27;
    vars k_26 and k_26;
    vars k_28 and k_28;
    vars k_29 and k_29;
    vars k_16 and k_16;
  enddef;
  def map between cdk1_c and cdk1_n for
    vars cdk1_n and cdk1_n;
    vars cdk1_c and cdk1_c;
  enddef;
  def map between cdk1_c and cdk1cln2_c for
    vars cdk1cln2_c and cdk1cln2_c;
    vars cdk1_c and cdk1_c;
  enddef;
  def map between cdk1_c and cdk1clb5_c for
    vars cdk1clb5_c and cdk1clb5_c;
    vars cdk1_c and cdk1_c;
  enddef;
  def map between cdk1_c and dv_c_dt for
    vars dv_c_dt and dv_c_dt;
  enddef;
  def map between cdk1_c and v_c for
    vars v_c and v_c;
  enddef;
  def map between cln3_n and rate_constants for
    vars k_24 and k_24;
    vars k_43 and k_43;
    vars k_25 and k_25;
    vars k_20 and k_20;
  enddef;
  def map between cln3_n and cln3_c for
    vars cln3_c and cln3_c;
  enddef;
  def map between cln3_n and k_volume for
    vars k_volume and k_volume;
  enddef;
  def map between cln3_n and cdk1_n for
    vars cdk1_n and cdk1_n;
    vars cln3_n and cln3_n;
  enddef;
  def map between cln3_n and cdk1cln3_n for
    vars cdk1cln3_n and cdk1cln3_n;
    vars cln3_n and cln3_n;
  enddef;
  def map between cdk1_n and rate_constants for
    vars k_44 and k_44;
    vars k_49 and k_49;
    vars k_24 and k_24;
    vars k_25 and k_25;
    vars k_21 and k_21;
  enddef;
  def map between cdk1_n and k_volume for
    vars k_volume and k_volume;
  enddef;
  def map between cdk1_n and cdk1cln3_n for
    vars cdk1cln3_n and cdk1cln3_n;
    vars cdk1_n and cdk1_n;
  enddef;
  def map between cdk1cln2_c and rate_constants for
    vars k_26 and k_26;
    vars k_27 and k_27;
    vars k_46 and k_46;
    vars k_53 and k_53;
  enddef;
  def map between cdk1cln2_c and cdk1cln2_n for
    vars cdk1cln2_n and cdk1cln2_n;
    vars cdk1cln2_c and cdk1cln2_c;
  enddef;
  def map between cdk1cln2_c and k_volume for
    vars k_volume and k_volume;
  enddef;
  def map between cdk1cln2_c and dv_c_dt for
    vars dv_c_dt and dv_c_dt;
  enddef;
  def map between cdk1cln2_c and v_c for
    vars v_c and v_c;
  enddef;
  def map between cdk1clb5_c and rate_constants for
    vars k_28 and k_28;
    vars k_29 and k_29;
    vars k_33 and k_33;
    vars k_32 and k_32;
    vars k_48 and k_48;
  enddef;
  def map between cdk1clb5_c and cdk1cln2_n for
    vars cdk1cln2_n and cdk1cln2_n;
  enddef;
  def map between cdk1clb5_c and cdk1clb5sic1_c for
    vars cdk1clb5sic1_c and cdk1clb5sic1_c;
    vars cdk1clb5_c and cdk1clb5_c;
  enddef;
  def map between cdk1clb5_c and sic1_c for
    vars sic1_c and sic1_c;
    vars cdk1clb5_c and cdk1clb5_c;
  enddef;
  def map between cdk1clb5_c and dv_c_dt for
    vars dv_c_dt and dv_c_dt;
  enddef;
  def map between cdk1clb5_c and v_c for
    vars v_c and v_c;
  enddef;
  def map between cdk1cln2_n and rate_constants for
    vars k_46 and k_46;
    vars k_53 and k_53;
  enddef;
  def map between cdk1cln2_n and k_volume for
    vars k_volume and k_volume;
  enddef;
  def map between cdk1clb5_n and rate_constants for
    vars k_41 and k_41;
    vars k_48 and k_48;
  enddef;
  def map between cdk1clb5_n and cdk1clb5sic1p_n for
    vars cdk1clb5sic1p_n and cdk1clb5sic1p_n;
  enddef;
  def map between cdk1clb5_n and cdk1clb5_c for
    vars cdk1clb5_c and cdk1clb5_c;
  enddef;
  def map between cdk1clb5_n and k_volume for
    vars k_volume and k_volume;
  enddef;
  def map between cdk1cln3_n and rate_constants for
    vars k_24 and k_24;
    vars k_25 and k_25;
    vars k_31 and k_31;
    vars k_30 and k_30;
    vars k_40 and k_40;
  enddef;
  def map between cdk1cln3_n and cdk1cln3far1_n for
    vars cdk1cln3far1_n and cdk1cln3far1_n;
    vars cdk1cln3_n and cdk1cln3_n;
  enddef;
  def map between cdk1cln3_n and far1_n for
    vars far1_n and far1_n;
    vars cdk1cln3_n and cdk1cln3_n;
  enddef;
  def map between cdk1cln3_n and cdk1cln3far1p_n for
    vars cdk1cln3far1p_n and cdk1cln3far1p_n;
  enddef;
  def map between sbfwhi5_n and rate_constants for
    vars k_34 and k_34;
    vars k_35 and k_35;
    vars k_36 and k_36;
  enddef;
  def map between sbfwhi5_n and whi5_n for
    vars whi5_n and whi5_n;
  enddef;
  def map between sbfwhi5_n and cdk1cln3_n for
    vars cdk1cln3_n and cdk1cln3_n;
  enddef;
  def map between sbfwhi5p_n and rate_constants for
    vars k_36 and k_36;
    vars k_39 and k_39;
  enddef;
  def map between sbfwhi5p_n and sbfwhi5_n for
    vars sbfwhi5_n and sbfwhi5_n;
  enddef;
  def map between sbfwhi5p_n and cdk1cln3_n for
    vars cdk1cln3_n and cdk1cln3_n;
  enddef;
  def map between cdk1cln3far1_n and rate_constants for
    vars k_30 and k_30;
    vars k_31 and k_31;
    vars k_37 and k_37;
  enddef;
  def map between cdk1cln3far1_n and far1_n for
    vars far1_n and far1_n;
    vars cdk1cln3far1_n and cdk1cln3far1_n;
  enddef;
  def map between cdk1cln3far1_n and cdk1cln2_n for
    vars cdk1cln2_n and cdk1cln2_n;
  enddef;
  def map between cdk1clb5sic1_n and rate_constants for
    vars k_47 and k_47;
    vars k_38 and k_38;
  enddef;
  def map between cdk1clb5sic1_n and cdk1clb5sic1_c for
    vars cdk1clb5sic1_c and cdk1clb5sic1_c;
  enddef;
  def map between cdk1clb5sic1_n and k_volume for
    vars k_volume and k_volume;
  enddef;
  def map between cdk1clb5sic1_n and cdk1cln2_n for
    vars cdk1cln2_n and cdk1cln2_n;
  enddef;
  def map between cdk1clb5sic1p_n and rate_constants for
    vars k_41 and k_41;
    vars k_38 and k_38;
  enddef;
  def map between cdk1clb5sic1p_n and cdk1clb5sic1_n for
    vars cdk1clb5sic1_n and cdk1clb5sic1_n;
  enddef;
  def map between cdk1clb5sic1p_n and cdk1cln2_n for
    vars cdk1cln2_n and cdk1cln2_n;
  enddef;
  def map between cdk1cln3far1p_n and rate_constants for
    vars k_37 and k_37;
    vars k_40 and k_40;
  enddef;
  def map between cdk1cln3far1p_n and cdk1cln3far1_n for
    vars cdk1cln3far1_n and cdk1cln3far1_n;
  enddef;
  def map between cdk1cln3far1p_n and cdk1cln2_n for
    vars cdk1cln2_n and cdk1cln2_n;
  enddef;
  def map between cdk1clb5sic1_c and rate_constants for
    vars k_32 and k_32;
    vars k_33 and k_33;
    vars k_47 and k_47;
  enddef;
  def map between cdk1clb5sic1_c and sic1_c for
    vars sic1_c and sic1_c;
    vars cdk1clb5sic1_c and cdk1clb5sic1_c;
  enddef;
  def map between cdk1clb5sic1_c and v_c for
    vars v_c and v_c;
  enddef;
  def map between cdk1clb5sic1_c and dv_c_dt for
    vars dv_c_dt and dv_c_dt;
  enddef;
  def map between sic1_c and rate_constants for
    vars k_9 and k_9;
    vars k_32 and k_32;
    vars k_33 and k_33;
    vars k_18 and k_18;
  enddef;
  def map between sic1_c and v_c for
    vars v_c and v_c;
  enddef;
  def map between sic1_c and dv_c_dt for
    vars dv_c_dt and dv_c_dt;
  enddef;
  def map between whi5_c and rate_constants for
    vars k_8 and k_8;
    vars k_45 and k_45;
    vars k_17 and k_17;
  enddef;
  def map between whi5_c and v_c for
    vars v_c and v_c;
  enddef;
  def map between whi5_c and dv_c_dt for
    vars dv_c_dt and dv_c_dt;
  enddef;
  def map between far1_c and rate_constants for
    vars k_5 and k_5;
    vars k_42 and k_42;
    vars k_14 and k_14;
  enddef;
  def map between far1_c and v_c for
    vars v_c and v_c;
  enddef;
  def map between far1_c and dv_c_dt for
    vars dv_c_dt and dv_c_dt;
  enddef;
  def map between whi5p_c and rate_constants for
    vars k_52 and k_52;
  enddef;
  def map between whi5p_c and whi5p_n for
    vars whi5p_n and whi5p_n;
  enddef;
  def map between whi5p_c and k_volume for
    vars k_volume and k_volume;
  enddef;
  def map between sic1P_n and rate_constants for
    vars k_41 and k_41;
  enddef;
  def map between sic1P_n and cdk1clb5sic1p_n for
    vars cdk1clb5sic1p_n and cdk1clb5sic1p_n;
  enddef;
  def map between far1P_n and rate_constants for
    vars k_40 and k_40;
  enddef;
  def map between far1P_n and cdk1cln3far1p_n for
    vars cdk1cln3far1p_n and cdk1cln3far1p_n;
  enddef;
  def map between whi5_n and rate_constants for
    vars k_45 and k_45;
    vars k_34 and k_34;
    vars k_22 and k_22;
  enddef;
  def map between whi5_n and whi5_c for
    vars whi5_c and whi5_c;
  enddef;
  def map between whi5_n and k_volume for
    vars k_volume and k_volume;
  enddef;
  def map between far1_n and rate_constants for
    vars k_42 and k_42;
    vars k_30 and k_30;
    vars k_31 and k_31;
    vars k_19 and k_19;
  enddef;
  def map between far1_n and far1_c for
    vars far1_c and far1_c;
  enddef;
  def map between far1_n and k_volume for
    vars k_volume and k_volume;
  enddef;
  def map between whi5p_n and rate_constants for
    vars k_39 and k_39;
    vars k_52 and k_52;
    vars k_23 and k_23;
  enddef;
  def map between whi5p_n and sbfwhi5p_n for
    vars sbfwhi5p_n and sbfwhi5p_n;
  enddef;
enddef;
