// This CellML file was generated on 10/12/2008 at 3:53:27 at p.m. using:
//
// COR (0.9.31.1125)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// creator: Family Lloyd; Given Catherine; Other May; c.lloyd@auckland.ac.nz; Orgname The University of Auckland; Orgunit The Bioengineering Institute
// comment: This CellML version of the model has been checked in COR and PCEnv and the model runs to replicate the results in the original published paper. The units have been checked and are consistent.; FN Jeelean Lim
// created: W3CDTF 2004-06-27T00:00:00+00:00
// modification: Removed initial values conflicting with values of variables defined by piecewise equations.; Family Lawson; Given James; Other Richard; W3CDTF 2008-01-14T13:00:52+13:00
// modification: Several initial values and equations were corrected. The units were made consistent. The model produces results that replicate the FIRST cycle of the graphs in the research paper but does not correctly demonstrate the cyclical nature of the graphs.; Family Lim; Given Jeelean; W3CDTF 2008-12-10T16:45:51+13:00
// modification: updated curation status, removed reference link from documentation; Family Lawson; Given James; Other Richard; W3CDTF 2009-05-29T16:08:43+12:00
// publisher: The University of Auckland, Bioengineering Institute
// title: Chen et al.'s 2004 mathematical model of cell cyc1e control in budding yeast.
// comment: This is the CellML description of Chen et al.'s 2004 mathematical model of cell cyc1e control in budding yeast.; FN Catherine Lloyd
// reference: _1 cell cyc1e; _2 yeast; _3 cell cycle; subject_type keyword
// reference: Pubmed_id 15169868; title Integrative Analysis of Cell Cycle Control in Budding Yeast; Family Chen; Given Katherine; Other C; Family Calzone; Given Laurence; Family Csikasz-Nagy; Given Attila; Family Cross; Given Frederick; Other R; Family Novak; Given Bela; Family Tyson; Given John; Other J; title Molecular Biology of the Cell; W3CDTF 2004-05-28
// simulation: pointDensity 100000; maximumStepSize 10; endingValue 200
def model chen_calzone_csikasznagy_cross_novak_tyson_2004_version01 as
  // An Integrative Analysis of Cell Cycle Control in Budding Yeast
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML version of the model has been checked in COR and PCEnv and the model runs to replicate the results in the original published paper.
  //
  // ValidateCellML verifies this model as valid CellML with full unit consistency.
  //
  // Model Structure
  //
  // The mitotic cell cycle can be defined as the sequence of events by which a somatic cell replicates all its components, and then divides them equally between two daughter cells. The end product is two genetically identical daughter cells. Cell division is an essential component of the biological processes of growth, reproduction and development. As might be expected for such an important process, the distinct phases and events of the cell cycle are carefully regulated by specific proteins.
  //
  // The cell cycle regulatory system is most fully understood for budding yeast, Saccharomyces cerevisiae. A hypothetical molecular mechanism, potentially underlying cell cycle control in this organism, is outlined in below. However, these networks of interacting proteins are so complex that the functional integration of the network cannot be understood by intuition alone. Mathematical models, which describe molecular interactions and reactions with biochemical rate equations, provide an integrative framework with which the complexities of molecular regulatory networks can be studied. In the Chen et al. 2004 publication described here, the authors develop a mathematical model to analyse cell cycle control in budding yeast. Model simulations reveal that the data generated by the model are in accord with the physiological properties of many genetic strains of budding yeast. The mathematical model is also useful in that it can be used to interpret existing experimental data and help to design new experiments.
  //
  // The model has been described here in CellML (the raw CellML description of the Chen et al. 2004 model can be downloaded in various formats as described in ).
  //
  // The complete original paper reference is cited below:
  //
  // Integrative analysis of cell cycle control in budding yeast, Katherine C. Chen, Laurence Calzone, Attila Csikasz-Nagy, Frederick R. Cross, Bela Novak, and John J. Tyson, 2004, Molecular Biology of the Cell . PubMed ID: 15169868 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=15169868&dopt=Abstract)
  //
  // reaction diagram
  //
  // A schematic diagram of the cell cycle control mechanism in budding yeast.
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  def comp mass as
    var mass: dimensionless {init: 1.206, pub: out};
    var kg: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(mass, time) = mass*kg;
  enddef;

  def comp Cln2 as
    var Cln2: dimensionless {init: 0.0652, pub: out};
    var ks_n2_: first_order_rate_constant {pub: in};
    var ks_n2__: first_order_rate_constant {pub: in};
    var kd_n2: first_order_rate_constant {pub: in};
    var mass: dimensionless {pub: in};
    var SBF: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Cln2, time) = (ks_n2_+ks_n2__*SBF)*mass-kd_n2*Cln2;
  enddef;

  def comp Clb5 as
    var Clb5: dimensionless {init: 0.0518, pub: out};
    var ks_b5_: first_order_rate_constant {pub: in};
    var ks_b5__: first_order_rate_constant {pub: in};
    var kdi_f5: first_order_rate_constant {pub: in};
    var kdi_b5: first_order_rate_constant {pub: in};
    var kas_b5: first_order_rate_constant {pub: in};
    var kas_f5: first_order_rate_constant {pub: in};
    var kd3_f6: first_order_rate_constant {pub: in};
    var kd3_c1: first_order_rate_constant {pub: in};
    var Vd_b5: first_order_rate_constant {pub: in};
    var mass: dimensionless {pub: in};
    var MBF: dimensionless {pub: in};
    var C5P: dimensionless {pub: in};
    var C5: dimensionless {pub: in};
    var F5P: dimensionless {pub: in};
    var F5: dimensionless {pub: in};
    var Sic1: dimensionless {pub: in};
    var Cdc6: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Clb5, time) = (ks_b5_+ks_b5__*MBF)*mass+kd3_c1*C5P+kdi_b5*C5+kd3_f6*F5P+kdi_f5*F5-(Vd_b5+kas_b5*Sic1+kas_f5*Cdc6)*Clb5;
  enddef;

  def comp Clb2 as
    var Clb2: dimensionless {init: 0.1469, pub: out};
    var ks_b2_: first_order_rate_constant {pub: in};
    var ks_b2__: first_order_rate_constant {pub: in};
    var kdi_b2: first_order_rate_constant {pub: in};
    var kdi_f2: first_order_rate_constant {pub: in};
    var kas_b2: first_order_rate_constant {pub: in};
    var kas_f2: first_order_rate_constant {pub: in};
    var kd3_f6: first_order_rate_constant {pub: in};
    var kd3_c1: first_order_rate_constant {pub: in};
    var Vd_b2: first_order_rate_constant {pub: in};
    var mass: dimensionless {pub: in};
    var Mcm1: dimensionless {pub: in};
    var C2P: dimensionless {pub: in};
    var C2: dimensionless {pub: in};
    var F2P: dimensionless {pub: in};
    var F2: dimensionless {pub: in};
    var Sic1: dimensionless {pub: in};
    var Cdc6: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Clb2, time) = (ks_b2_+ks_b2__*Mcm1)*mass+kd3_c1*C2P+kdi_b2*C2+kd3_f6*F2P+kdi_f2*F2-(Vd_b2+kas_b2*Sic1+kas_f2*Cdc6)*Clb2;
  enddef;

  def comp Sic1 as
    var Sic1: dimensionless {init: 0.0229, pub: out};
    var ks_c1_: first_order_rate_constant {pub: in};
    var ks_c1__: first_order_rate_constant {pub: in};
    var kdi_b2: first_order_rate_constant {pub: in};
    var kdi_b5: first_order_rate_constant {pub: in};
    var kpp_c1: first_order_rate_constant {pub: in};
    var kas_b2: first_order_rate_constant {pub: in};
    var kas_b5: first_order_rate_constant {pub: in};
    var Vd_b2: first_order_rate_constant {pub: in};
    var Vd_b5: first_order_rate_constant {pub: in};
    var Vkp_c1: first_order_rate_constant {pub: in};
    var Swi5: dimensionless {pub: in};
    var C2: dimensionless {pub: in};
    var C5: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var Sic1P: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var Clb5: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Sic1, time) = ks_c1_+ks_c1__*Swi5+(Vd_b2+kdi_b2)*C2+(Vd_b5+kdi_b5)*C5+kpp_c1*Cdc14*Sic1P-(kas_b2*Clb2+kas_b5*Clb5+Vkp_c1)*Sic1;
  enddef;

  def comp Sic1P as
    var Sic1P: dimensionless {init: 0.0064, pub: out};
    var kpp_c1: first_order_rate_constant {pub: in};
    var kd3_c1: first_order_rate_constant {pub: in};
    var Vd_b2: first_order_rate_constant {pub: in};
    var Vd_b5: first_order_rate_constant {pub: in};
    var Vkp_c1: first_order_rate_constant {pub: in};
    var C2P: dimensionless {pub: in};
    var C5P: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var Sic1: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Sic1P, time) = Vkp_c1*Sic1-(kpp_c1*Cdc14+kd3_c1)*Sic1P+Vd_b2*C2P+Vd_b5*C5P;
  enddef;

  def comp C2 as
    var C2: dimensionless {init: 0.2384, pub: out};
    var kpp_c1: first_order_rate_constant {pub: in};
    var kas_b2: first_order_rate_constant {pub: in};
    var kdi_b2: first_order_rate_constant {pub: in};
    var Vd_b2: first_order_rate_constant {pub: in};
    var Vkp_c1: first_order_rate_constant {pub: in};
    var C2P: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var Sic1: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(C2, time) = kas_b2*Clb2*Sic1+kpp_c1*Cdc14*C2P-(kdi_b2+Vd_b2+Vkp_c1)*C2;
  enddef;

  def comp C5 as
    var C5: dimensionless {init: 0.0701, pub: out};
    var kpp_c1: first_order_rate_constant {pub: in};
    var kas_b5: first_order_rate_constant {pub: in};
    var kdi_b5: first_order_rate_constant {pub: in};
    var Vd_b5: first_order_rate_constant {pub: in};
    var Vkp_c1: first_order_rate_constant {pub: in};
    var C5P: dimensionless {pub: in};
    var Clb5: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var Sic1: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(C5, time) = kas_b5*Clb5*Sic1+kpp_c1*Cdc14*C5P-(kdi_b5+Vd_b5+Vkp_c1)*C5;
  enddef;

  def comp C2P as
    var C2P: dimensionless {init: 0.024, pub: out};
    var kpp_c1: first_order_rate_constant {pub: in};
    var kd3_c1: first_order_rate_constant {pub: in};
    var Vd_b2: first_order_rate_constant {pub: in};
    var Vkp_c1: first_order_rate_constant {pub: in};
    var C2: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(C2P, time) = Vkp_c1*C2-(kpp_c1*Cdc14+kd3_c1+Vd_b2)*C2P;
  enddef;

  def comp C5P as
    var C5P: dimensionless {init: 0.0069, pub: out};
    var kpp_c1: first_order_rate_constant {pub: in};
    var kd3_c1: first_order_rate_constant {pub: in};
    var Vd_b5: first_order_rate_constant {pub: in};
    var Vkp_c1: first_order_rate_constant {pub: in};
    var C5: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(C5P, time) = Vkp_c1*C5-(kpp_c1*Cdc14+kd3_c1+Vd_b5)*C5P;
  enddef;

  def comp Cdc6 as
    var Cdc6: dimensionless {init: 0.1076, pub: out};
    var ks_f6_: first_order_rate_constant {pub: in};
    var ks_f6__: first_order_rate_constant {pub: in};
    var ks_f6___: first_order_rate_constant {pub: in};
    var kdi_f2: first_order_rate_constant {pub: in};
    var kdi_f5: first_order_rate_constant {pub: in};
    var kpp_f6: first_order_rate_constant {pub: in};
    var kas_f2: first_order_rate_constant {pub: in};
    var kas_f5: first_order_rate_constant {pub: in};
    var Vd_b2: first_order_rate_constant {pub: in};
    var Vd_b5: first_order_rate_constant {pub: in};
    var Vkp_f6: first_order_rate_constant {pub: in};
    var Swi5: dimensionless {pub: in};
    var SBF: dimensionless {pub: in};
    var F2: dimensionless {pub: in};
    var F5: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var Cdc6P: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var Clb5: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Cdc6, time) = ks_f6_+ks_f6__*Swi5+ks_f6___*SBF+(Vd_b2+kdi_f2)*F2+(Vd_b5+kdi_f5)*F5+kpp_f6*Cdc14*Cdc6P-(kas_f2*Clb2+kas_f5*Clb5+Vkp_f6)*Cdc6;
  enddef;

  def comp Cdc6P as
    var Cdc6P: dimensionless {init: 0.0155, pub: out};
    var kd3_f6: first_order_rate_constant {pub: in};
    var kpp_f6: first_order_rate_constant {pub: in};
    var Vd_b2: first_order_rate_constant {pub: in};
    var Vd_b5: first_order_rate_constant {pub: in};
    var Vkp_f6: first_order_rate_constant {pub: in};
    var F2P: dimensionless {pub: in};
    var F5P: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var Cdc6: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Cdc6P, time) = Vkp_f6*Cdc6-(kpp_f6*Cdc14+kd3_f6)*Cdc6P+Vd_b2*F2P+Vd_b5*F5P;
  enddef;

  def comp F2 as
    var F2: dimensionless {init: 0.2361, pub: out};
    var kas_f2: first_order_rate_constant {pub: in};
    var kpp_f6: first_order_rate_constant {pub: in};
    var Vd_b2: first_order_rate_constant {pub: in};
    var kdi_f2: first_order_rate_constant {pub: in};
    var Vkp_f6: first_order_rate_constant {pub: in};
    var Clb2: dimensionless {pub: in};
    var F2P: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var Cdc6: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(F2, time) = kas_f2*Clb2*Cdc6+kpp_f6*Cdc14*F2P-(kdi_f2+Vd_b2+Vkp_f6)*F2;
  enddef;

  def comp Pds1 as
    var Pds1: dimensionless {init: 0.0256, pub: out};
    var ks_pds_: first_order_rate_constant {pub: in};
    var ks1_pds__: first_order_rate_constant {pub: in};
    var ks2_pds__: first_order_rate_constant {pub: in};
    var kdi_esp: first_order_rate_constant {pub: in};
    var Vd_pds: first_order_rate_constant {pub: in};
    var kas_esp: first_order_rate_constant {pub: in};
    var SBF: dimensionless {pub: in};
    var Mcm1: dimensionless {pub: in};
    var PE: dimensionless {pub: in};
    var Esp1: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Pds1, time) = ks_pds_+ks1_pds__*SBF+ks2_pds__*Mcm1+kdi_esp*PE-(Vd_pds+kas_esp*Esp1)*Pds1;
  enddef;

  def comp Esp1 as
    var Esp1: dimensionless {init: 0.3013, pub: out};
    var kdi_esp: first_order_rate_constant {pub: in};
    var Vd_pds: first_order_rate_constant {pub: in};
    var kas_esp: first_order_rate_constant {pub: in};
    var Pds1: dimensionless {pub: in};
    var PE: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Esp1, time) = -kas_esp*Pds1*Esp1+(kdi_esp+Vd_pds)*PE;
  enddef;

  def comp ORI as
    var ORI: dimensionless {init: 0.0009, pub: out};
    var ks_ori: first_order_rate_constant {pub: in};
    var kd_ori: first_order_rate_constant {pub: in};
    var epsilon_ori_b5: dimensionless {pub: in};
    var epsilon_ori_b2: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var Clb5: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(ORI, time) = ks_ori*(epsilon_ori_b5*Clb5+epsilon_ori_b2*Clb2)-kd_ori*ORI;
  enddef;

  def comp BUD as
    var BUD: dimensionless {init: 0.0085, pub: out};
    var ks_bud: first_order_rate_constant {pub: in};
    var kd_bud: first_order_rate_constant {pub: in};
    var epsilon_bud_n2: dimensionless {pub: in};
    var epsilon_bud_n3: dimensionless {pub: in};
    var epsilon_bud_b5: dimensionless {pub: in};
    var Cln2: dimensionless {pub: in};
    var Cln3: dimensionless {pub: in};
    var Clb5: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(BUD, time) = ks_bud*(epsilon_bud_n2*Cln2+epsilon_bud_n3*Cln3+epsilon_bud_b5*Clb5)-kd_bud*BUD;
  enddef;

  def comp SPN as
    var SPN: dimensionless {init: 0.0305, pub: out};
    var ks_spn: first_order_rate_constant {pub: in};
    var kd_spn: first_order_rate_constant {pub: in};
    var Jspn: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(SPN, time) = ks_spn*Clb2/(Jspn+Clb2)-kd_spn*SPN;
  enddef;

  def comp G_sbf as
    var G_sbf: dimensionless {pub: out};
    var Ji_sbf: dimensionless {pub: in};
    var Ja_sbf: dimensionless {pub: in};
    var Vi_sbf: first_order_rate_constant {pub: in};
    var Va_sbf: first_order_rate_constant {pub: in};
    G_sbf = 2{dimensionless}*Ji_sbf*Va_sbf/(Vi_sbf+Ja_sbf*Vi_sbf+Ji_sbf*Va_sbf+sqrt(sqr(Vi_sbf+Ja_sbf*Vi_sbf+Ji_sbf*Va_sbf-Va_sbf)-4{dimensionless}*(Vi_sbf-Va_sbf)*Ji_sbf*Va_sbf)-Va_sbf);
  enddef;

  def comp G_mcm as
    var G_mcm: dimensionless {pub: out};
    var Ji_mcm: dimensionless {pub: in};
    var Ja_mcm: dimensionless {pub: in};
    var ki_mcm: first_order_rate_constant {pub: in};
    var ka_mcm: first_order_rate_constant {pub: in};
    var Clb2: dimensionless {pub: in};
    G_mcm = 2{dimensionless}*Ji_mcm*ka_mcm*Clb2/(ki_mcm+Ja_mcm*ki_mcm+Ji_mcm*ka_mcm*Clb2+sqrt(sqr(ki_mcm+Ja_mcm*ki_mcm+Ji_mcm*ka_mcm*Clb2-ka_mcm*Clb2)-4{dimensionless}*(ki_mcm-ka_mcm*Clb2)*Ji_mcm*ka_mcm*Clb2)-ka_mcm*Clb2);
  enddef;

  def comp SBF_MBF as
    var SBF: dimensionless {pub: out};
    var MBF: dimensionless {pub: out};
    var G_sbf: dimensionless {pub: in};
    SBF = MBF;
    MBF = G_sbf;
  enddef;

  def comp Mcm1 as
    var Mcm1: dimensionless {pub: out};
    var G_mcm: dimensionless {pub: in};
    Mcm1 = G_mcm;
  enddef;

  def comp Cln3 as
    var Cln3: dimensionless {pub: out};
    var C0: dimensionless {pub: in};
    var Dn3: dimensionless {pub: in};
    var Jn3: dimensionless {pub: in};
    var mass: dimensionless {pub: in};
    Cln3 = C0*Dn3*mass/(Jn3+Dn3*mass);
  enddef;

  def comp Bck2 as
    var Bck2: dimensionless {pub: out};
    var B0: dimensionless {pub: in};
    var mass: dimensionless {pub: in};
    Bck2 = B0*mass;
  enddef;

  def comp Clb5_T as
    var Clb5_T: dimensionless {pub: out};
    var Clb5: dimensionless {pub: in};
    var C5: dimensionless {pub: in};
    var C5P: dimensionless {pub: in};
    var F5: dimensionless {pub: in};
    var F5P: dimensionless {pub: in};
    Clb5_T = Clb5+C5+C5P+F5+F5P;
  enddef;

  def comp Clb2_T as
    var Clb2_T: dimensionless {pub: out};
    var Clb2: dimensionless {pub: in};
    var C2: dimensionless {pub: in};
    var C2P: dimensionless {pub: in};
    var F2: dimensionless {pub: in};
    var F2P: dimensionless {pub: in};
    Clb2_T = Clb2+C2+C2P+F2+F2P;
  enddef;

  def comp Sic1_T as
    var Sic1_T: dimensionless {pub: out};
    var Sic1: dimensionless {pub: in};
    var Sic1P: dimensionless {pub: in};
    var C2: dimensionless {pub: in};
    var C2P: dimensionless {pub: in};
    var C5: dimensionless {pub: in};
    var C5P: dimensionless {pub: in};
    Sic1_T = Sic1+Sic1P+C2+C2P+C5+C5P;
  enddef;

  def comp F5 as
    var F5: dimensionless {init: 7.2e-5, pub: out};
    var kas_f5: first_order_rate_constant {pub: in};
    var kpp_f6: first_order_rate_constant {pub: in};
    var kdi_f5: first_order_rate_constant {pub: in};
    var Vkp_f6: first_order_rate_constant {pub: in};
    var Vd_b5: first_order_rate_constant {pub: in};
    var Clb5: dimensionless {pub: in};
    var Cdc6: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var F5P: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(F5, time) = kas_f5*Clb5*Cdc6+kpp_f6*Cdc14*F5P-(kdi_f5+Vd_b5+Vkp_f6)*F5;
  enddef;

  def comp F2P as
    var F2P: dimensionless {init: 0.0274, pub: out};
    var kd3_f6: first_order_rate_constant {pub: in};
    var kpp_f6: first_order_rate_constant {pub: in};
    var Vkp_f6: first_order_rate_constant {pub: in};
    var Vd_b2: first_order_rate_constant {pub: in};
    var F2: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(F2P, time) = Vkp_f6*F2-(kpp_f6*Cdc14+kd3_f6+Vd_b2)*F2P;
  enddef;

  def comp F5P as
    var F5P: dimensionless {init: 7.9e-6, pub: out};
    var kd3_f6: first_order_rate_constant {pub: in};
    var kpp_f6: first_order_rate_constant {pub: in};
    var Vkp_f6: first_order_rate_constant {pub: in};
    var Vd_b5: first_order_rate_constant {pub: in};
    var F5: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(F5P, time) = Vkp_f6*F5-(kpp_f6*Cdc14+kd3_f6+Vd_b5)*F5P;
  enddef;

  def comp Swi5_T as
    var Swi5_T: dimensionless {init: 0.9765, pub: out};
    var ks_swi_: first_order_rate_constant {pub: in};
    var ks_swi__: first_order_rate_constant {pub: in};
    var kd_swi: first_order_rate_constant {pub: in};
    var Mcm1: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Swi5_T, time) = ks_swi_+ks_swi__*Mcm1-kd_swi*Swi5_T;
  enddef;

  def comp Swi5 as
    var Swi5: dimensionless {init: 0.9562, pub: out};
    var ks_swi_: first_order_rate_constant {pub: in};
    var ks_swi__: first_order_rate_constant {pub: in};
    var kd_swi: first_order_rate_constant {pub: in};
    var ka_swi: first_order_rate_constant {pub: in};
    var ki_swi: first_order_rate_constant {pub: in};
    var Mcm1: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var Swi5_T: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Swi5, time) = ks_swi_+ks_swi__*Mcm1+ka_swi*Cdc14*(Swi5_T-Swi5)-(kd_swi+ki_swi*Clb2)*Swi5;
  enddef;

  def comp APC_P as
    var APC_P: dimensionless {init: 0.1015, pub: out};
    var ka_apc: first_order_rate_constant {pub: in};
    var ki_apc: first_order_rate_constant {pub: in};
    var Ja_apc: dimensionless {pub: in};
    var Ji_apc: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(APC_P, time) = ka_apc*Clb2*(1{dimensionless}-APC_P)/(Ja_apc+1{dimensionless}-APC_P)-ki_apc*APC_P/(Ji_apc+APC_P);
  enddef;

  def comp Cdc20_T as
    var Cdc20_T: dimensionless {init: 1.9163, pub: out};
    var ks_20_: first_order_rate_constant {pub: in};
    var ks_20__: first_order_rate_constant {pub: in};
    var kd_20: first_order_rate_constant {pub: in};
    var Mcm1: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Cdc20_T, time) = ks_20_+ks_20__*Mcm1-kd_20*Cdc20_T;
  enddef;

  def comp Cdc20_A as
    var Cdc20_A: dimensionless {init: 0.4443, pub: out};
    var ka_20_: first_order_rate_constant {pub: in};
    var ka_20__: first_order_rate_constant {pub: in};
    var kd_20: first_order_rate_constant {pub: in};
    var kmad2: first_order_rate_constant {pub: in};
    var APC_P: dimensionless {pub: in};
    var Cdc20_T: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Cdc20_A, time) = (ka_20_+ka_20__*APC_P)*(Cdc20_T-Cdc20_A)-(kmad2+kd_20)*Cdc20_A;
  enddef;

  def comp Cdh1_T as
    var Cdh1_T: dimensionless {init: 1, pub: out};
    var ks_cdh: first_order_rate_constant {pub: in};
    var kd_cdh: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Cdh1_T, time) = ks_cdh-kd_cdh*Cdh1_T;
  enddef;

  def comp Cdh1 as
    var Cdh1: dimensionless {init: 0.9305, pub: out};
    var ks_cdh: first_order_rate_constant {pub: in};
    var kd_cdh: first_order_rate_constant {pub: in};
    var Ja_cdh: dimensionless {pub: in};
    var Ji_cdh: dimensionless {pub: in};
    var Va_cdh: first_order_rate_constant {pub: in};
    var Vi_cdh: first_order_rate_constant {pub: in};
    var Cdh1_T: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Cdh1, time) = ks_cdh+Va_cdh*(Cdh1_T-Cdh1)/(Ja_cdh+Cdh1_T-Cdh1)-(kd_cdh*Cdh1+Vi_cdh*Cdh1/(Ji_cdh+Cdh1));
  enddef;

  def comp Tem1 as
    var Tem1: dimensionless {init: 0.9039, pub: out};
    var kbub2: first_order_rate_constant {pub: in};
    var klte1: first_order_rate_constant {pub: in};
    var Ja_tem: dimensionless {pub: in};
    var Ji_tem: dimensionless {pub: in};
    var Tem1_T: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Tem1, time) = klte1*(Tem1_T-Tem1)/(Ja_tem+Tem1_T-Tem1)-kbub2*Tem1/(Ji_tem+Tem1);
  enddef;

  def comp Cdc15 as
    var Cdc15: dimensionless {init: 0.6565, pub: out};
    var ka_15_: first_order_rate_constant {pub: in};
    var ka_15__: first_order_rate_constant {pub: in};
    var ka_15___: first_order_rate_constant {pub: in};
    var ki_15: first_order_rate_constant {pub: in};
    var Tem1: dimensionless {pub: in};
    var Tem1_T: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var Cdc15_T: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Cdc15, time) = (ka_15_*(Tem1_T-Tem1)+ka_15__*Tem1+ka_15___*Cdc14)*(Cdc15_T-Cdc15)-ki_15*Cdc15;
  enddef;

  def comp Cdc14_T as
    var Cdc14_T: dimensionless {init: 2, pub: out};
    var ks_14: first_order_rate_constant {pub: in};
    var kd_14: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Cdc14_T, time) = ks_14-kd_14*Cdc14_T;
  enddef;

  def comp Cdc14 as
    var Cdc14: dimensionless {init: 0.4683, pub: out};
    var ks_14: first_order_rate_constant {pub: in};
    var kd_14: first_order_rate_constant {pub: in};
    var kd_net: first_order_rate_constant {pub: in};
    var kdi_rent: first_order_rate_constant {pub: in};
    var kdi_rentp: first_order_rate_constant {pub: in};
    var kas_rent: first_order_rate_constant {pub: in};
    var kas_rentp: first_order_rate_constant {pub: in};
    var RENT: dimensionless {pub: in};
    var RENTP: dimensionless {pub: in};
    var Net1: dimensionless {pub: in};
    var Net1P: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Cdc14, time) = ks_14+kd_net*(RENT+RENTP)+kdi_rent*RENT+kdi_rentp*RENTP-(kd_14*Cdc14+(kas_rent*Net1+kas_rentp*Net1P)*Cdc14);
  enddef;

  def comp Net1_T as
    var Net1_T: dimensionless {init: 2.8, pub: out};
    var ks_net: first_order_rate_constant {pub: in};
    var kd_net: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Net1_T, time) = ks_net-kd_net*Net1_T;
  enddef;

  def comp Cdc6_T as
    var Cdc6_T: dimensionless {pub: out};
    var Cdc6: dimensionless {pub: in};
    var Cdc6P: dimensionless {pub: in};
    var F2: dimensionless {pub: in};
    var F2P: dimensionless {pub: in};
    var F5: dimensionless {pub: in};
    var F5P: dimensionless {pub: in};
    Cdc6_T = Cdc6+Cdc6P+F2+F2P+F5+F5P;
  enddef;

  def comp CKI_T as
    var CKI_T: dimensionless {pub: out};
    var Sic1_T: dimensionless {pub: in};
    var Cdc6_T: dimensionless {pub: in};
    CKI_T = Sic1_T+Cdc6_T;
  enddef;

  def comp RENTP as
    var RENTP: dimensionless {pub: out};
    var Cdc14_T: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var RENT: dimensionless {pub: in};
    RENTP = Cdc14_T-(RENT+Cdc14);
  enddef;

  def comp Net1P as
    var Net1P: dimensionless {pub: out};
    var Net1_T: dimensionless {pub: in};
    var Cdc14_T: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var Net1: dimensionless {pub: in};
    Net1P = Net1_T+Cdc14-(Net1+Cdc14_T);
  enddef;

  def comp PE as
    var PE: dimensionless {pub: out};
    var Esp1_T: dimensionless {pub: in};
    var Esp1: dimensionless {pub: in};
    PE = Esp1_T-Esp1;
  enddef;

  def comp Vd_b5 as
    var Vd_b5: first_order_rate_constant {pub: out};
    var kd_b5_: first_order_rate_constant {pub: in};
    var kd_b5__: first_order_rate_constant {pub: in};
    var Cdc20_A: dimensionless {pub: in};
    Vd_b5 = kd_b5_+kd_b5__*Cdc20_A;
  enddef;

  def comp Vd_b2 as
    var Vd_b2: first_order_rate_constant {pub: out};
    var kd_b2_: first_order_rate_constant {pub: in};
    var kd_b2__: first_order_rate_constant {pub: in};
    var kd_b2p: first_order_rate_constant {pub: in};
    var Cdh1: dimensionless {pub: in};
    var Cdc20_A: dimensionless {pub: in};
    Vd_b2 = kd_b2_+kd_b2__*Cdh1+kd_b2p*Cdc20_A;
  enddef;

  def comp Va_sbf as
    var Va_sbf: first_order_rate_constant {pub: out};
    var ka_sbf: first_order_rate_constant {pub: in};
    var epsilon_sbf_n2: dimensionless {pub: in};
    var epsilon_sbf_n3: dimensionless {pub: in};
    var epsilon_sbf_b5: dimensionless {pub: in};
    var Cln2: dimensionless {pub: in};
    var Clb5: dimensionless {pub: in};
    var Cln3: dimensionless {pub: in};
    var Bck2: dimensionless {pub: in};
    Va_sbf = ka_sbf*(epsilon_sbf_n2*Cln2+epsilon_sbf_n3*(Cln3+Bck2)+epsilon_sbf_b5*Clb5);
  enddef;

  def comp Vi_sbf as
    var Vi_sbf: first_order_rate_constant {pub: out};
    var ki_sbf_: first_order_rate_constant {pub: in};
    var ki_sbf__: first_order_rate_constant {pub: in};
    var Clb2: dimensionless {pub: in};
    Vi_sbf = ki_sbf_+ki_sbf__*Clb2;
  enddef;

  def comp Vkp_c1 as
    var Vkp_c1: first_order_rate_constant {pub: out};
    var kd1_c1: first_order_rate_constant {pub: in};
    var kd2_c1: first_order_rate_constant {pub: in};
    var Jd2_c1: dimensionless {pub: in};
    var epsilon_c1_n2: dimensionless {pub: in};
    var epsilon_c1_n3: dimensionless {pub: in};
    var epsilon_c1_k2: dimensionless {pub: in};
    var epsilon_c1_b5: dimensionless {pub: in};
    var epsilon_c1_b2: dimensionless {pub: in};
    var Cln2: dimensionless {pub: in};
    var Clb5: dimensionless {pub: in};
    var Cln3: dimensionless {pub: in};
    var Bck2: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var Sic1_T: dimensionless {pub: in};
    Vkp_c1 = kd1_c1+kd2_c1*(epsilon_c1_n3*Cln3+epsilon_c1_k2*Bck2+epsilon_c1_n2*Cln2+epsilon_c1_b5*Clb5+epsilon_c1_b2*Clb2)/(Jd2_c1+Sic1_T);
  enddef;

  def comp Vkp_f6 as
    var Vkp_f6: first_order_rate_constant {pub: out};
    var Jd2_f6: dimensionless {pub: in};
    var kd1_f6: first_order_rate_constant {pub: in};
    var kd2_f6: first_order_rate_constant {pub: in};
    var epsilon_f6_n2: dimensionless {pub: in};
    var epsilon_f6_n3: dimensionless {pub: in};
    var epsilon_f6_k2: dimensionless {pub: in};
    var epsilon_f6_b5: dimensionless {pub: in};
    var epsilon_f6_b2: dimensionless {pub: in};
    var Cln2: dimensionless {pub: in};
    var Clb5: dimensionless {pub: in};
    var Cln3: dimensionless {pub: in};
    var Bck2: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var Cdc6_T: dimensionless {pub: in};
    Vkp_f6 = kd1_f6+kd2_f6*(epsilon_f6_n3*Cln3+epsilon_f6_k2*Bck2+epsilon_f6_n2*Cln2+epsilon_f6_b5*Clb5+epsilon_f6_b2*Clb2)/(Jd2_f6+Cdc6_T);
  enddef;

  def comp Va_cdh as
    var Va_cdh: first_order_rate_constant {pub: out};
    var ka_cdh_: first_order_rate_constant {pub: in};
    var ka_cdh__: first_order_rate_constant {pub: in};
    var Cdc14: dimensionless {pub: in};
    Va_cdh = ka_cdh_+ka_cdh__*Cdc14;
  enddef;

  def comp Vi_cdh as
    var Vi_cdh: first_order_rate_constant {pub: out};
    var ki_cdh_: first_order_rate_constant {pub: in};
    var ki_cdh__: first_order_rate_constant {pub: in};
    var epsilon_cdh_n2: dimensionless {pub: in};
    var epsilon_cdh_n3: dimensionless {pub: in};
    var epsilon_cdh_b5: dimensionless {pub: in};
    var epsilon_cdh_b2: dimensionless {pub: in};
    var Cln2: dimensionless {pub: in};
    var Clb5: dimensionless {pub: in};
    var Cln3: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    Vi_cdh = ki_cdh_+ki_cdh__*(epsilon_cdh_n3*Cln3+epsilon_cdh_n2*Cln2+epsilon_cdh_b5*Clb5+epsilon_cdh_b2*Clb2);
  enddef;

  def comp Vpp_net as
    var Vpp_net: first_order_rate_constant {pub: out};
    var kpp_net_: first_order_rate_constant {pub: in};
    var kpp_net__: first_order_rate_constant {pub: in};
    var PPX: dimensionless {pub: in};
    Vpp_net = kpp_net_+kpp_net__*PPX;
  enddef;

  def comp Vkp_net as
    var Vkp_net: first_order_rate_constant {pub: out};
    var kkp_net_: first_order_rate_constant {pub: in};
    var kkp_net__: first_order_rate_constant {pub: in};
    var Cdc15: dimensionless {pub: in};
    var mass: dimensionless {pub: in};
    Vkp_net = (kkp_net_+kkp_net__*Cdc15)*mass;
  enddef;

  def comp Net1 as
    var Net1: dimensionless {init: 0.0186, pub: out};
    var ks_net: first_order_rate_constant {pub: in};
    var kd_net: first_order_rate_constant {pub: in};
    var kd_14: first_order_rate_constant {pub: in};
    var kdi_rent: first_order_rate_constant {pub: in};
    var Vpp_net: first_order_rate_constant {pub: in};
    var kas_rent: first_order_rate_constant {pub: in};
    var Vkp_net: first_order_rate_constant {pub: in};
    var RENT: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var Net1P: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Net1, time) = ks_net+kd_14*RENT+kdi_rent*RENT+Vpp_net*Net1P-(kd_net*Net1+kas_rent*Cdc14*Net1+Vkp_net*Net1);
  enddef;

  def comp RENT as
    var RENT: dimensionless {init: 1.0495, pub: out};
    var ks_net: first_order_rate_constant {pub: in};
    var kd_net: first_order_rate_constant {pub: in};
    var kd_14: first_order_rate_constant {pub: in};
    var kdi_rent: first_order_rate_constant {pub: in};
    var Vpp_net: first_order_rate_constant {pub: in};
    var kas_rent: first_order_rate_constant {pub: in};
    var Vkp_net: first_order_rate_constant {pub: in};
    var Net1: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    var RENTP: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(RENT, time) = kas_rent*Cdc14*Net1+Vpp_net*RENTP-((kd_14+kd_net)*RENT+kdi_rent*RENT+Vkp_net*RENT);
  enddef;

  def comp PPX as
    var PPX: dimensionless {init: 0.1232, pub: out};
    var ks_ppx: first_order_rate_constant {pub: in};
    var Vd_ppx: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(PPX, time) = ks_ppx-Vd_ppx*PPX;
  enddef;

  def comp Vd_ppx as
    var Vd_ppx: first_order_rate_constant {pub: out};
    var kd_ppx_: first_order_rate_constant {pub: in};
    var kd_ppx__: first_order_rate_constant {pub: in};
    var Pds1: dimensionless {pub: in};
    var Cdc20_A: dimensionless {pub: in};
    var Jpds: dimensionless {pub: in};
    var J20_ppx: dimensionless {pub: in};
    Vd_ppx = kd_ppx_+kd_ppx__*(J20_ppx+Cdc20_A)*Jpds/(Jpds+Pds1);
  enddef;

  def comp Vd_pds as
    var Vd_pds: first_order_rate_constant {pub: out};
    var kd1_pds_: first_order_rate_constant {pub: in};
    var kd2_pds__: first_order_rate_constant {pub: in};
    var kd3_pds__: first_order_rate_constant {pub: in};
    var Cdh1: dimensionless {pub: in};
    var Cdc20_A: dimensionless {pub: in};
    Vd_pds = kd1_pds_+kd2_pds__*Cdc20_A+kd3_pds__*Cdh1;
  enddef;

  def comp model_parameters as
    var kg: first_order_rate_constant {init: 0.007702, pub: out};
    var ks_n2_: first_order_rate_constant {init: 0, pub: out};
    var ks_n2__: first_order_rate_constant {init: 0.15, pub: out};
    var kd_n2: first_order_rate_constant {init: 0.12, pub: out};
    var ks_b5_: first_order_rate_constant {init: 0.0008, pub: out};
    var ks_b5__: first_order_rate_constant {init: 0.005, pub: out};
    var kd_b5_: first_order_rate_constant {init: 0.01, pub: out};
    var kd_b5__: first_order_rate_constant {init: 0.16, pub: out};
    var ks_b2_: first_order_rate_constant {init: 0.001, pub: out};
    var ks_b2__: first_order_rate_constant {init: 0.04, pub: out};
    var kd_b2_: first_order_rate_constant {init: 0.003, pub: out};
    var kd_b2__: first_order_rate_constant {init: 0.4, pub: out};
    var kd_b2p: first_order_rate_constant {init: 0.15, pub: out};
    var ks_c1_: first_order_rate_constant {init: 0.012, pub: out};
    var ks_c1__: first_order_rate_constant {init: 0.12, pub: out};
    var kd1_c1: first_order_rate_constant {init: 0.01, pub: out};
    var kd2_c1: first_order_rate_constant {init: 1, pub: out};
    var kd3_c1: first_order_rate_constant {init: 1, pub: out};
    var kpp_c1: first_order_rate_constant {init: 4, pub: out};
    var ks_f6_: first_order_rate_constant {init: 0.024, pub: out};
    var ks_f6__: first_order_rate_constant {init: 0.12, pub: out};
    var ks_f6___: first_order_rate_constant {init: 0.004, pub: out};
    var kd1_f6: first_order_rate_constant {init: 0.01, pub: out};
    var kd2_f6: first_order_rate_constant {init: 1, pub: out};
    var kd3_f6: first_order_rate_constant {init: 1, pub: out};
    var kpp_f6: first_order_rate_constant {init: 4, pub: out};
    var kas_b5: first_order_rate_constant {init: 50, pub: out};
    var kdi_b5: first_order_rate_constant {init: 0.06, pub: out};
    var kas_f5: first_order_rate_constant {init: 0.01, pub: out};
    var kdi_f5: first_order_rate_constant {init: 0.01, pub: out};
    var kas_b2: first_order_rate_constant {init: 50, pub: out};
    var kdi_b2: first_order_rate_constant {init: 0.05, pub: out};
    var kas_f2: first_order_rate_constant {init: 15, pub: out};
    var kdi_f2: first_order_rate_constant {init: 0.5, pub: out};
    var ks_swi_: first_order_rate_constant {init: 0.005, pub: out};
    var ks_swi__: first_order_rate_constant {init: 0.08, pub: out};
    var kd_swi: first_order_rate_constant {init: 0.08, pub: out};
    var ka_swi: first_order_rate_constant {init: 2, pub: out};
    var ki_swi: first_order_rate_constant {init: 0.05, pub: out};
    var ka_apc: first_order_rate_constant {init: 0.1, pub: out};
    var ki_apc: first_order_rate_constant {init: 0.15, pub: out};
    var ks_20_: first_order_rate_constant {init: 0.006, pub: out};
    var ks_20__: first_order_rate_constant {init: 0.6, pub: out};
    var kd_20: first_order_rate_constant {init: 0.3, pub: out};
    var ka_20_: first_order_rate_constant {init: 0.05, pub: out};
    var ka_20__: first_order_rate_constant {init: 0.2, pub: out};
    var ks_cdh: first_order_rate_constant {init: 0.01, pub: out};
    var kd_cdh: first_order_rate_constant {init: 0.01, pub: out};
    var ka_cdh_: first_order_rate_constant {init: 0.01, pub: out};
    var ka_cdh__: first_order_rate_constant {init: 0.8, pub: out};
    var ki_cdh_: first_order_rate_constant {init: 0.001, pub: out};
    var ki_cdh__: first_order_rate_constant {init: 0.08, pub: out};
    var ks_14: first_order_rate_constant {init: 0.2, pub: out};
    var kd_14: first_order_rate_constant {init: 0.1, pub: out};
    var ks_net: first_order_rate_constant {init: 0.084, pub: out};
    var kd_net: first_order_rate_constant {init: 0.03, pub: out};
    var ka_15_: first_order_rate_constant {init: 0.002, pub: out};
    var ka_15__: first_order_rate_constant {init: 1, pub: out};
    var ka_15___: first_order_rate_constant {init: 0.001, pub: out};
    var ki_15: first_order_rate_constant {init: 0.5, pub: out};
    var kpp_net_: first_order_rate_constant {init: 0.05, pub: out};
    var kpp_net__: first_order_rate_constant {init: 3, pub: out};
    var kkp_net_: first_order_rate_constant {init: 0.01, pub: out};
    var kkp_net__: first_order_rate_constant {init: 0.6, pub: out};
    var kas_rent: first_order_rate_constant {init: 200, pub: out};
    var kas_rentp: first_order_rate_constant {init: 1, pub: out};
    var kdi_rent: first_order_rate_constant {init: 1, pub: out};
    var kdi_rentp: first_order_rate_constant {init: 2, pub: out};
    var ks_ppx: first_order_rate_constant {init: 0.1, pub: out};
    var kd_ppx_: first_order_rate_constant {init: 0.17, pub: out};
    var kd_ppx__: first_order_rate_constant {init: 2, pub: out};
    var ks_pds_: first_order_rate_constant {init: 0, pub: out};
    var ks1_pds__: first_order_rate_constant {init: 0.03, pub: out};
    var ks2_pds__: first_order_rate_constant {init: 0.055, pub: out};
    var kd1_pds_: first_order_rate_constant {init: 0.01, pub: out};
    var kd2_pds__: first_order_rate_constant {init: 0.2, pub: out};
    var kd3_pds__: first_order_rate_constant {init: 0.04, pub: out};
    var kas_esp: first_order_rate_constant {init: 50, pub: out};
    var kdi_esp: first_order_rate_constant {init: 0.5, pub: out};
    var ks_ori: first_order_rate_constant {init: 2, pub: out};
    var kd_ori: first_order_rate_constant {init: 0.06, pub: out};
    var ks_bud: first_order_rate_constant {init: 0.2, pub: out};
    var kd_bud: first_order_rate_constant {init: 0.06, pub: out};
    var ks_spn: first_order_rate_constant {init: 0.1, pub: out};
    var kd_spn: first_order_rate_constant {init: 0.06, pub: out};
    var ka_sbf: first_order_rate_constant {init: 0.38, pub: out};
    var ki_sbf_: first_order_rate_constant {init: 0.6, pub: out};
    var ki_sbf__: first_order_rate_constant {init: 8, pub: out};
    var ka_mcm: first_order_rate_constant {init: 1, pub: out};
    var ki_mcm: first_order_rate_constant {init: 0.15, pub: out};
    var kmad2: first_order_rate_constant {pub: out};
    var kbub2: first_order_rate_constant {pub: out};
    var klte1: first_order_rate_constant {pub: out};
    var epsilon_sbf_n2: dimensionless {init: 2, pub: out};
    var epsilon_sbf_n3: dimensionless {init: 10, pub: out};
    var epsilon_sbf_b5: dimensionless {init: 2, pub: out};
    var epsilon_c1_n3: dimensionless {init: 0.3, pub: out};
    var epsilon_c1_n2: dimensionless {init: 0.06, pub: out};
    var epsilon_c1_k2: dimensionless {init: 0.03, pub: out};
    var epsilon_c1_b5: dimensionless {init: 0.1, pub: out};
    var epsilon_c1_b2: dimensionless {init: 0.45, pub: out};
    var epsilon_f6_n3: dimensionless {init: 0.3, pub: out};
    var epsilon_f6_n2: dimensionless {init: 0.06, pub: out};
    var epsilon_f6_k2: dimensionless {init: 0.03, pub: out};
    var epsilon_f6_b5: dimensionless {init: 0.1, pub: out};
    var epsilon_f6_b2: dimensionless {init: 0.55, pub: out};
    var epsilon_cdh_n2: dimensionless {init: 0.4, pub: out};
    var epsilon_cdh_n3: dimensionless {init: 0.25, pub: out};
    var epsilon_cdh_b5: dimensionless {init: 8, pub: out};
    var epsilon_cdh_b2: dimensionless {init: 1.2, pub: out};
    var epsilon_ori_b5: dimensionless {init: 0.9, pub: out};
    var epsilon_ori_b2: dimensionless {init: 0.45, pub: out};
    var epsilon_bud_n3: dimensionless {init: 0.05, pub: out};
    var epsilon_bud_n2: dimensionless {init: 0.25, pub: out};
    var epsilon_bud_b5: dimensionless {init: 1, pub: out};
    var C0: dimensionless {init: 0.4, pub: out};
    var Dn3: dimensionless {init: 1, pub: out};
    var B0: dimensionless {init: 0.054, pub: out};
    var Tem1_T: dimensionless {init: 1, pub: out};
    var Cdc15_T: dimensionless {init: 1, pub: out};
    var Esp1_T: dimensionless {init: 1, pub: out};
    var Jd2_c1: dimensionless {init: 0.05, pub: out};
    var Jd2_f6: dimensionless {init: 0.05, pub: out};
    var Ja_apc: dimensionless {init: 0.1, pub: out};
    var Ji_apc: dimensionless {init: 0.1, pub: out};
    var Ja_cdh: dimensionless {init: 0.03, pub: out};
    var Ji_cdh: dimensionless {init: 0.03, pub: out};
    var Ja_tem: dimensionless {init: 0.1, pub: out};
    var Ji_tem: dimensionless {init: 0.1, pub: out};
    var Ja_sbf: dimensionless {init: 0.01, pub: out};
    var Ji_sbf: dimensionless {init: 0.01, pub: out};
    var Ja_mcm: dimensionless {init: 0.1, pub: out};
    var Ji_mcm: dimensionless {init: 0.1, pub: out};
    var Jspn: dimensionless {init: 0.14, pub: out};
    var Jn3: dimensionless {init: 6, pub: out};
    var J20_ppx: dimensionless {init: 0.15, pub: out};
    var Jpds: dimensionless {init: 0.04, pub: out};
    var Kez: dimensionless {init: 0.3, pub: out};
    var Kez2: dimensionless {init: 0.2, pub: out};
    var ORI: dimensionless {pub: in};
    var SPN: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    kmad2 = sel
      case (ORI > 1{dimensionless}) and (SPN < 1{dimensionless}):
        8{first_order_rate_constant};
      otherwise:
        0.01{first_order_rate_constant};
    endsel;
    kbub2 = sel
      case (ORI > 1{dimensionless}) and (SPN < 1{dimensionless}):
        1{first_order_rate_constant};
      otherwise:
        0.2{first_order_rate_constant};
    endsel;
    klte1 = sel
      case (SPN > 1{dimensionless}) and (Clb2 > Kez):
        1{first_order_rate_constant};
      otherwise:
        0.1{first_order_rate_constant};
    endsel;
  enddef;
  def map between mass and environment for
    vars time and time;
  enddef;
  def map between Clb2 and environment for
    vars time and time;
  enddef;
  def map between Cln2 and environment for
    vars time and time;
  enddef;
  def map between Clb5 and environment for
    vars time and time;
  enddef;
  def map between Sic1 and environment for
    vars time and time;
  enddef;
  def map between Sic1P and environment for
    vars time and time;
  enddef;
  def map between C2 and environment for
    vars time and time;
  enddef;
  def map between C5 and environment for
    vars time and time;
  enddef;
  def map between C2P and environment for
    vars time and time;
  enddef;
  def map between C5P and environment for
    vars time and time;
  enddef;
  def map between Cdc6 and environment for
    vars time and time;
  enddef;
  def map between Cdc6P and environment for
    vars time and time;
  enddef;
  def map between F2 and environment for
    vars time and time;
  enddef;
  def map between Pds1 and environment for
    vars time and time;
  enddef;
  def map between Esp1 and environment for
    vars time and time;
  enddef;
  def map between ORI and environment for
    vars time and time;
  enddef;
  def map between BUD and environment for
    vars time and time;
  enddef;
  def map between SPN and environment for
    vars time and time;
  enddef;
  def map between F5 and environment for
    vars time and time;
  enddef;
  def map between F2P and environment for
    vars time and time;
  enddef;
  def map between F5P and environment for
    vars time and time;
  enddef;
  def map between Swi5_T and environment for
    vars time and time;
  enddef;
  def map between Swi5 and environment for
    vars time and time;
  enddef;
  def map between APC_P and environment for
    vars time and time;
  enddef;
  def map between Cdc20_T and environment for
    vars time and time;
  enddef;
  def map between Cdc20_A and environment for
    vars time and time;
  enddef;
  def map between Cdh1_T and environment for
    vars time and time;
  enddef;
  def map between Cdh1 and environment for
    vars time and time;
  enddef;
  def map between Tem1 and environment for
    vars time and time;
  enddef;
  def map between Cdc15 and environment for
    vars time and time;
  enddef;
  def map between Cdc14_T and environment for
    vars time and time;
  enddef;
  def map between Cdc14 and environment for
    vars time and time;
  enddef;
  def map between Net1_T and environment for
    vars time and time;
  enddef;
  def map between Net1 and environment for
    vars time and time;
  enddef;
  def map between RENT and environment for
    vars time and time;
  enddef;
  def map between PPX and environment for
    vars time and time;
  enddef;
  def map between mass and model_parameters for
    vars kg and kg;
  enddef;
  def map between Cln2 and model_parameters for
    vars ks_n2_ and ks_n2_;
    vars ks_n2__ and ks_n2__;
    vars kd_n2 and kd_n2;
  enddef;
  def map between Clb5 and model_parameters for
    vars ks_b5_ and ks_b5_;
    vars ks_b5__ and ks_b5__;
    vars kd3_c1 and kd3_c1;
    vars kdi_b5 and kdi_b5;
    vars kd3_f6 and kd3_f6;
    vars kdi_f5 and kdi_f5;
    vars kas_b5 and kas_b5;
    vars kas_f5 and kas_f5;
  enddef;
  def map between Clb2 and model_parameters for
    vars ks_b2_ and ks_b2_;
    vars Clb2 and Clb2;
    vars ks_b2__ and ks_b2__;
    vars kd3_c1 and kd3_c1;
    vars kdi_b2 and kdi_b2;
    vars kd3_f6 and kd3_f6;
    vars kdi_f2 and kdi_f2;
    vars kas_b2 and kas_b2;
    vars kas_f2 and kas_f2;
  enddef;
  def map between Sic1 and model_parameters for
    vars ks_c1_ and ks_c1_;
    vars ks_c1__ and ks_c1__;
    vars kpp_c1 and kpp_c1;
    vars kdi_b2 and kdi_b2;
    vars kdi_b5 and kdi_b5;
    vars kas_b2 and kas_b2;
    vars kas_b5 and kas_b5;
  enddef;
  def map between Sic1P and model_parameters for
    vars kpp_c1 and kpp_c1;
    vars kd3_c1 and kd3_c1;
  enddef;
  def map between C2 and model_parameters for
    vars kas_b2 and kas_b2;
    vars kpp_c1 and kpp_c1;
    vars kdi_b2 and kdi_b2;
  enddef;
  def map between C5 and model_parameters for
    vars kas_b5 and kas_b5;
    vars kpp_c1 and kpp_c1;
    vars kdi_b5 and kdi_b5;
  enddef;
  def map between C2P and model_parameters for
    vars kd3_c1 and kd3_c1;
    vars kpp_c1 and kpp_c1;
  enddef;
  def map between C5P and model_parameters for
    vars kd3_c1 and kd3_c1;
    vars kpp_c1 and kpp_c1;
  enddef;
  def map between Cdc6 and model_parameters for
    vars ks_f6_ and ks_f6_;
    vars ks_f6__ and ks_f6__;
    vars ks_f6___ and ks_f6___;
    vars kpp_f6 and kpp_f6;
    vars kdi_f2 and kdi_f2;
    vars kdi_f5 and kdi_f5;
    vars kas_f5 and kas_f5;
    vars kas_f2 and kas_f2;
  enddef;
  def map between Cdc6P and model_parameters for
    vars kpp_f6 and kpp_f6;
    vars kd3_f6 and kd3_f6;
  enddef;
  def map between F2 and model_parameters for
    vars kas_f2 and kas_f2;
    vars kpp_f6 and kpp_f6;
    vars kdi_f2 and kdi_f2;
  enddef;
  def map between Pds1 and model_parameters for
    vars ks_pds_ and ks_pds_;
    vars ks1_pds__ and ks1_pds__;
    vars ks2_pds__ and ks2_pds__;
    vars kdi_esp and kdi_esp;
    vars kas_esp and kas_esp;
  enddef;
  def map between Esp1 and model_parameters for
    vars kdi_esp and kdi_esp;
    vars kas_esp and kas_esp;
  enddef;
  def map between ORI and model_parameters for
    vars ks_ori and ks_ori;
    vars ORI and ORI;
    vars kd_ori and kd_ori;
    vars epsilon_ori_b5 and epsilon_ori_b5;
    vars epsilon_ori_b2 and epsilon_ori_b2;
  enddef;
  def map between BUD and model_parameters for
    vars ks_bud and ks_bud;
    vars kd_bud and kd_bud;
    vars epsilon_bud_b5 and epsilon_bud_b5;
    vars epsilon_bud_n2 and epsilon_bud_n2;
    vars epsilon_bud_n3 and epsilon_bud_n3;
  enddef;
  def map between SPN and model_parameters for
    vars ks_spn and ks_spn;
    vars SPN and SPN;
    vars Jspn and Jspn;
    vars kd_spn and kd_spn;
  enddef;
  def map between G_sbf and model_parameters for
    vars Ja_sbf and Ja_sbf;
    vars Ji_sbf and Ji_sbf;
  enddef;
  def map between G_mcm and model_parameters for
    vars Ja_mcm and Ja_mcm;
    vars Ji_mcm and Ji_mcm;
    vars ka_mcm and ka_mcm;
    vars ki_mcm and ki_mcm;
  enddef;
  def map between Cln3 and model_parameters for
    vars C0 and C0;
    vars Dn3 and Dn3;
    vars Jn3 and Jn3;
  enddef;
  def map between Bck2 and model_parameters for
    vars B0 and B0;
  enddef;
  def map between F5 and model_parameters for
    vars kas_f5 and kas_f5;
    vars kpp_f6 and kpp_f6;
    vars kdi_f5 and kdi_f5;
  enddef;
  def map between F2P and model_parameters for
    vars kd3_f6 and kd3_f6;
    vars kpp_f6 and kpp_f6;
  enddef;
  def map between F5P and model_parameters for
    vars kd3_f6 and kd3_f6;
    vars kpp_f6 and kpp_f6;
  enddef;
  def map between Swi5_T and model_parameters for
    vars ks_swi_ and ks_swi_;
    vars ks_swi__ and ks_swi__;
    vars kd_swi and kd_swi;
  enddef;
  def map between Swi5 and model_parameters for
    vars ks_swi_ and ks_swi_;
    vars ks_swi__ and ks_swi__;
    vars ka_swi and ka_swi;
    vars kd_swi and kd_swi;
    vars ki_swi and ki_swi;
  enddef;
  def map between APC_P and model_parameters for
    vars ka_apc and ka_apc;
    vars ki_apc and ki_apc;
    vars Ja_apc and Ja_apc;
    vars Ji_apc and Ji_apc;
  enddef;
  def map between Cdc20_T and model_parameters for
    vars ks_20_ and ks_20_;
    vars ks_20__ and ks_20__;
    vars kd_20 and kd_20;
  enddef;
  def map between Cdc20_A and model_parameters for
    vars ka_20_ and ka_20_;
    vars ka_20__ and ka_20__;
    vars kd_20 and kd_20;
    vars kmad2 and kmad2;
  enddef;
  def map between Cdh1 and model_parameters for
    vars ks_cdh and ks_cdh;
    vars kd_cdh and kd_cdh;
    vars Ja_cdh and Ja_cdh;
    vars Ji_cdh and Ji_cdh;
  enddef;
  def map between Cdh1_T and model_parameters for
    vars ks_cdh and ks_cdh;
    vars kd_cdh and kd_cdh;
  enddef;
  def map between Tem1 and model_parameters for
    vars klte1 and klte1;
    vars kbub2 and kbub2;
    vars Tem1_T and Tem1_T;
    vars Ja_tem and Ja_tem;
    vars Ji_tem and Ji_tem;
  enddef;
  def map between Cdc15 and model_parameters for
    vars ka_15_ and ka_15_;
    vars ka_15__ and ka_15__;
    vars ka_15___ and ka_15___;
    vars Tem1_T and Tem1_T;
    vars Cdc15_T and Cdc15_T;
    vars ki_15 and ki_15;
  enddef;
  def map between Cdc14_T and model_parameters for
    vars ks_14 and ks_14;
    vars kd_14 and kd_14;
  enddef;
  def map between PE and model_parameters for
    vars Esp1_T and Esp1_T;
  enddef;
  def map between Cdc14 and model_parameters for
    vars ks_14 and ks_14;
    vars kd_14 and kd_14;
    vars kd_net and kd_net;
    vars kdi_rent and kdi_rent;
    vars kdi_rentp and kdi_rentp;
    vars kas_rent and kas_rent;
    vars kas_rentp and kas_rentp;
  enddef;
  def map between Net1_T and model_parameters for
    vars ks_net and ks_net;
    vars kd_net and kd_net;
  enddef;
  def map between Vd_b5 and model_parameters for
    vars kd_b5_ and kd_b5_;
    vars kd_b5__ and kd_b5__;
  enddef;
  def map between Vd_b2 and model_parameters for
    vars kd_b2_ and kd_b2_;
    vars kd_b2__ and kd_b2__;
    vars kd_b2p and kd_b2p;
  enddef;
  def map between Va_sbf and model_parameters for
    vars ka_sbf and ka_sbf;
    vars epsilon_sbf_n2 and epsilon_sbf_n2;
    vars epsilon_sbf_n3 and epsilon_sbf_n3;
    vars epsilon_sbf_b5 and epsilon_sbf_b5;
  enddef;
  def map between Vi_sbf and model_parameters for
    vars ki_sbf_ and ki_sbf_;
    vars ki_sbf__ and ki_sbf__;
  enddef;
  def map between Vkp_c1 and model_parameters for
    vars kd1_c1 and kd1_c1;
    vars kd2_c1 and kd2_c1;
    vars epsilon_c1_n2 and epsilon_c1_n2;
    vars epsilon_c1_n3 and epsilon_c1_n3;
    vars epsilon_c1_k2 and epsilon_c1_k2;
    vars epsilon_c1_b5 and epsilon_c1_b5;
    vars epsilon_c1_b2 and epsilon_c1_b2;
    vars Jd2_c1 and Jd2_c1;
  enddef;
  def map between Vkp_f6 and model_parameters for
    vars kd1_f6 and kd1_f6;
    vars kd2_f6 and kd2_f6;
    vars epsilon_f6_n2 and epsilon_f6_n2;
    vars epsilon_f6_n3 and epsilon_f6_n3;
    vars epsilon_f6_k2 and epsilon_f6_k2;
    vars epsilon_f6_b5 and epsilon_f6_b5;
    vars epsilon_f6_b2 and epsilon_f6_b2;
    vars Jd2_f6 and Jd2_f6;
  enddef;
  def map between Va_cdh and model_parameters for
    vars ka_cdh_ and ka_cdh_;
    vars ka_cdh__ and ka_cdh__;
  enddef;
  def map between Vi_cdh and model_parameters for
    vars ki_cdh_ and ki_cdh_;
    vars ki_cdh__ and ki_cdh__;
    vars epsilon_cdh_n2 and epsilon_cdh_n2;
    vars epsilon_cdh_n3 and epsilon_cdh_n3;
    vars epsilon_cdh_b5 and epsilon_cdh_b5;
    vars epsilon_cdh_b2 and epsilon_cdh_b2;
  enddef;
  def map between Vpp_net and model_parameters for
    vars kpp_net_ and kpp_net_;
    vars kpp_net__ and kpp_net__;
  enddef;
  def map between Vkp_net and model_parameters for
    vars kkp_net_ and kkp_net_;
    vars kkp_net__ and kkp_net__;
  enddef;
  def map between Net1 and model_parameters for
    vars ks_net and ks_net;
    vars kd_net and kd_net;
    vars kd_14 and kd_14;
    vars kdi_rent and kdi_rent;
    vars kas_rent and kas_rent;
  enddef;
  def map between RENT and model_parameters for
    vars ks_net and ks_net;
    vars kd_net and kd_net;
    vars kd_14 and kd_14;
    vars kdi_rent and kdi_rent;
    vars kas_rent and kas_rent;
  enddef;
  def map between PPX and model_parameters for
    vars ks_ppx and ks_ppx;
  enddef;
  def map between Vd_ppx and model_parameters for
    vars kd_ppx_ and kd_ppx_;
    vars kd_ppx__ and kd_ppx__;
    vars J20_ppx and J20_ppx;
    vars Jpds and Jpds;
  enddef;
  def map between Vd_pds and model_parameters for
    vars kd1_pds_ and kd1_pds_;
    vars kd2_pds__ and kd2_pds__;
    vars kd3_pds__ and kd3_pds__;
  enddef;
  def map between mass and Cln2 for
    vars mass and mass;
  enddef;
  def map between Cln2 and SBF_MBF for
    vars SBF and SBF;
  enddef;
  def map between Clb5 and SBF_MBF for
    vars MBF and MBF;
  enddef;
  def map between Clb5 and mass for
    vars mass and mass;
  enddef;
  def map between Clb5 and C5P for
    vars C5P and C5P;
  enddef;
  def map between Clb5 and C5 for
    vars C5 and C5;
    vars Clb5 and Clb5;
  enddef;
  def map between Clb5 and F5P for
    vars F5P and F5P;
  enddef;
  def map between Clb5 and F5 for
    vars F5 and F5;
    vars Clb5 and Clb5;
  enddef;
  def map between Clb5 and Sic1 for
    vars Sic1 and Sic1;
    vars Clb5 and Clb5;
  enddef;
  def map between Clb5 and Cdc6 for
    vars Cdc6 and Cdc6;
    vars Clb5 and Clb5;
  enddef;
  def map between Clb2 and G_mcm for
    vars Clb2 and Clb2;
  enddef;
  def map between Clb2 and mass for
    vars mass and mass;
  enddef;
  def map between Clb2 and Mcm1 for
    vars Mcm1 and Mcm1;
  enddef;
  def map between Clb2 and C2P for
    vars C2P and C2P;
  enddef;
  def map between Clb2 and C2 for
    vars C2 and C2;
    vars Clb2 and Clb2;
  enddef;
  def map between Clb2 and F2P for
    vars F2P and F2P;
  enddef;
  def map between Clb2 and F2 for
    vars F2 and F2;
    vars Clb2 and Clb2;
  enddef;
  def map between Clb2 and Sic1 for
    vars Sic1 and Sic1;
    vars Clb2 and Clb2;
  enddef;
  def map between Clb2 and Cdc6 for
    vars Cdc6 and Cdc6;
    vars Clb2 and Clb2;
  enddef;
  def map between Sic1 and Swi5 for
    vars Swi5 and Swi5;
  enddef;
  def map between Sic1 and Vkp_c1 for
    vars Vkp_c1 and Vkp_c1;
  enddef;
  def map between Sic1P and Vkp_c1 for
    vars Vkp_c1 and Vkp_c1;
  enddef;
  def map between C2 and Vkp_c1 for
    vars Vkp_c1 and Vkp_c1;
  enddef;
  def map between C5 and Vkp_c1 for
    vars Vkp_c1 and Vkp_c1;
  enddef;
  def map between Sic1 and C2 for
    vars C2 and C2;
    vars Sic1 and Sic1;
  enddef;
  def map between Sic1 and C5 for
    vars C5 and C5;
    vars Sic1 and Sic1;
  enddef;
  def map between Sic1 and Cdc14 for
    vars Cdc14 and Cdc14;
  enddef;
  def map between Sic1 and Sic1P for
    vars Sic1P and Sic1P;
    vars Sic1 and Sic1;
  enddef;
  def map between Sic1P and Cdc14 for
    vars Cdc14 and Cdc14;
  enddef;
  def map between Sic1P and C2P for
    vars C2P and C2P;
  enddef;
  def map between Sic1P and C5P for
    vars C5P and C5P;
  enddef;
  def map between C2 and Cdc14 for
    vars Cdc14 and Cdc14;
  enddef;
  def map between C2 and C2P for
    vars C2P and C2P;
    vars C2 and C2;
  enddef;
  def map between C5 and Cdc14 for
    vars Cdc14 and Cdc14;
  enddef;
  def map between C5 and C5P for
    vars C5P and C5P;
    vars C5 and C5;
  enddef;
  def map between Cdc6 and Swi5 for
    vars Swi5 and Swi5;
  enddef;
  def map between Cdc6 and SBF_MBF for
    vars SBF and SBF;
  enddef;
  def map between Cdc6 and F2 for
    vars F2 and F2;
    vars Cdc6 and Cdc6;
  enddef;
  def map between Cdc6 and F5 for
    vars F5 and F5;
    vars Cdc6 and Cdc6;
  enddef;
  def map between Cdc6 and Cdc14 for
    vars Cdc14 and Cdc14;
  enddef;
  def map between Cdc6 and Cdc6P for
    vars Cdc6P and Cdc6P;
    vars Cdc6 and Cdc6;
  enddef;
  def map between Cdc6P and Cdc14 for
    vars Cdc14 and Cdc14;
  enddef;
  def map between Cdc6P and F2P for
    vars F2P and F2P;
  enddef;
  def map between Cdc6P and F5P for
    vars F5P and F5P;
  enddef;
  def map between F2 and Cdc14 for
    vars Cdc14 and Cdc14;
  enddef;
  def map between F2 and F2P for
    vars F2P and F2P;
    vars F2 and F2;
  enddef;
  def map between Pds1 and SBF_MBF for
    vars SBF and SBF;
  enddef;
  def map between Pds1 and Mcm1 for
    vars Mcm1 and Mcm1;
  enddef;
  def map between Pds1 and PE for
    vars PE and PE;
  enddef;
  def map between Pds1 and Esp1 for
    vars Esp1 and Esp1;
    vars Pds1 and Pds1;
  enddef;
  def map between Esp1 and PE for
    vars PE and PE;
    vars Esp1 and Esp1;
  enddef;
  def map between ORI and Clb5 for
    vars Clb5 and Clb5;
  enddef;
  def map between ORI and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between BUD and Clb5 for
    vars Clb5 and Clb5;
  enddef;
  def map between BUD and Cln2 for
    vars Cln2 and Cln2;
  enddef;
  def map between BUD and Cln3 for
    vars Cln3 and Cln3;
  enddef;
  def map between SPN and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between SBF_MBF and G_sbf for
    vars G_sbf and G_sbf;
  enddef;
  def map between Mcm1 and G_mcm for
    vars G_mcm and G_mcm;
  enddef;
  def map between Cln3 and mass for
    vars mass and mass;
  enddef;
  def map between Bck2 and mass for
    vars mass and mass;
  enddef;
  def map between Clb5_T and Clb5 for
    vars Clb5 and Clb5;
  enddef;
  def map between Clb5_T and C5 for
    vars C5 and C5;
  enddef;
  def map between Clb5_T and C5P for
    vars C5P and C5P;
  enddef;
  def map between Clb5_T and F5 for
    vars F5 and F5;
  enddef;
  def map between Clb5_T and F5P for
    vars F5P and F5P;
  enddef;
  def map between Clb2_T and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between Clb2_T and C2 for
    vars C2 and C2;
  enddef;
  def map between Clb2_T and C2P for
    vars C2P and C2P;
  enddef;
  def map between Clb2_T and F2 for
    vars F2 and F2;
  enddef;
  def map between Clb2_T and F2P for
    vars F2P and F2P;
  enddef;
  def map between Sic1_T and Sic1 for
    vars Sic1 and Sic1;
  enddef;
  def map between Sic1_T and Sic1P for
    vars Sic1P and Sic1P;
  enddef;
  def map between Sic1_T and C2 for
    vars C2 and C2;
  enddef;
  def map between Sic1_T and C2P for
    vars C2P and C2P;
  enddef;
  def map between Sic1_T and C5 for
    vars C5 and C5;
  enddef;
  def map between Sic1_T and C5P for
    vars C5P and C5P;
  enddef;
  def map between Cdc6_T and Cdc6 for
    vars Cdc6 and Cdc6;
  enddef;
  def map between Cdc6_T and Cdc6P for
    vars Cdc6P and Cdc6P;
  enddef;
  def map between Cdc6_T and F2 for
    vars F2 and F2;
  enddef;
  def map between Cdc6_T and F2P for
    vars F2P and F2P;
  enddef;
  def map between Cdc6_T and F5 for
    vars F5 and F5;
  enddef;
  def map between Cdc6_T and F5P for
    vars F5P and F5P;
  enddef;
  def map between CKI_T and Sic1_T for
    vars Sic1_T and Sic1_T;
  enddef;
  def map between CKI_T and Cdc6_T for
    vars Cdc6_T and Cdc6_T;
  enddef;
  def map between RENTP and Cdc14_T for
    vars Cdc14_T and Cdc14_T;
  enddef;
  def map between RENTP and RENT for
    vars RENT and RENT;
    vars RENTP and RENTP;
  enddef;
  def map between RENTP and Cdc14 for
    vars Cdc14 and Cdc14;
    vars RENTP and RENTP;
  enddef;
  def map between Net1P and Net1_T for
    vars Net1_T and Net1_T;
  enddef;
  def map between Net1P and Net1 for
    vars Net1P and Net1P;
    vars Net1 and Net1;
  enddef;
  def map between Net1P and Cdc14_T for
    vars Cdc14_T and Cdc14_T;
  enddef;
  def map between Net1P and Cdc14 for
    vars Cdc14 and Cdc14;
    vars Net1P and Net1P;
  enddef;
  def map between F5 and Cdc14 for
    vars Cdc14 and Cdc14;
  enddef;
  def map between F5 and F5P for
    vars F5P and F5P;
    vars F5 and F5;
  enddef;
  def map between F2P and Cdc14 for
    vars Cdc14 and Cdc14;
  enddef;
  def map between F5P and Cdc14 for
    vars Cdc14 and Cdc14;
  enddef;
  def map between Swi5_T and Mcm1 for
    vars Mcm1 and Mcm1;
  enddef;
  def map between Swi5 and Mcm1 for
    vars Mcm1 and Mcm1;
  enddef;
  def map between Swi5 and Cdc14 for
    vars Cdc14 and Cdc14;
  enddef;
  def map between Swi5 and Swi5_T for
    vars Swi5_T and Swi5_T;
  enddef;
  def map between Swi5 and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between APC_P and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between Cdc20_T and Mcm1 for
    vars Mcm1 and Mcm1;
  enddef;
  def map between Cdc20_A and APC_P for
    vars APC_P and APC_P;
  enddef;
  def map between Cdc20_A and Cdc20_T for
    vars Cdc20_T and Cdc20_T;
  enddef;
  def map between Cdh1 and Cdh1_T for
    vars Cdh1_T and Cdh1_T;
  enddef;
  def map between Cdc15 and Tem1 for
    vars Tem1 and Tem1;
  enddef;
  def map between Cdc15 and Cdc14 for
    vars Cdc14 and Cdc14;
  enddef;
  def map between Cdc14 and RENT for
    vars RENT and RENT;
    vars Cdc14 and Cdc14;
  enddef;
  def map between Cdc14 and Net1 for
    vars Net1 and Net1;
    vars Cdc14 and Cdc14;
  enddef;
  def map between Vd_b5 and Cdc20_A for
    vars Cdc20_A and Cdc20_A;
  enddef;
  def map between Vd_b2 and Cdc20_A for
    vars Cdc20_A and Cdc20_A;
  enddef;
  def map between Vd_b2 and Cdh1 for
    vars Cdh1 and Cdh1;
  enddef;
  def map between Va_sbf and Cln3 for
    vars Cln3 and Cln3;
  enddef;
  def map between Va_sbf and Cln2 for
    vars Cln2 and Cln2;
  enddef;
  def map between Va_sbf and Bck2 for
    vars Bck2 and Bck2;
  enddef;
  def map between Va_sbf and Clb5 for
    vars Clb5 and Clb5;
  enddef;
  def map between Vi_sbf and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between Vkp_c1 and Cln3 for
    vars Cln3 and Cln3;
  enddef;
  def map between Vkp_c1 and Cln2 for
    vars Cln2 and Cln2;
  enddef;
  def map between Vkp_c1 and Bck2 for
    vars Bck2 and Bck2;
  enddef;
  def map between Vkp_c1 and Clb5 for
    vars Clb5 and Clb5;
  enddef;
  def map between Vkp_c1 and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between Vkp_c1 and Sic1_T for
    vars Sic1_T and Sic1_T;
  enddef;
  def map between Va_cdh and Cdc14 for
    vars Cdc14 and Cdc14;
  enddef;
  def map between Vkp_net and Cdc15 for
    vars Cdc15 and Cdc15;
  enddef;
  def map between Vkp_net and mass for
    vars mass and mass;
  enddef;
  def map between Net1 and RENT for
    vars RENT and RENT;
    vars Net1 and Net1;
  enddef;
  def map between Vd_ppx and Cdc20_A for
    vars Cdc20_A and Cdc20_A;
  enddef;
  def map between Vd_ppx and Pds1 for
    vars Pds1 and Pds1;
  enddef;
  def map between Vd_pds and Cdc20_A for
    vars Cdc20_A and Cdc20_A;
  enddef;
  def map between Vd_pds and Cdh1 for
    vars Cdh1 and Cdh1;
  enddef;
  def map between Sic1P and Vd_b5 for
    vars Vd_b5 and Vd_b5;
  enddef;
  def map between Sic1P and Vd_b2 for
    vars Vd_b2 and Vd_b2;
  enddef;
  def map between Clb5 and Vd_b5 for
    vars Vd_b5 and Vd_b5;
  enddef;
  def map between Clb2 and Vd_b2 for
    vars Vd_b2 and Vd_b2;
  enddef;
  def map between Sic1 and Vd_b5 for
    vars Vd_b5 and Vd_b5;
  enddef;
  def map between Sic1 and Vd_b2 for
    vars Vd_b2 and Vd_b2;
  enddef;
  def map between C2 and Vd_b2 for
    vars Vd_b2 and Vd_b2;
  enddef;
  def map between C5 and Vd_b5 for
    vars Vd_b5 and Vd_b5;
  enddef;
  def map between C2P and Vkp_c1 for
    vars Vkp_c1 and Vkp_c1;
  enddef;
  def map between C2P and Vd_b2 for
    vars Vd_b2 and Vd_b2;
  enddef;
  def map between C5P and Vkp_c1 for
    vars Vkp_c1 and Vkp_c1;
  enddef;
  def map between C5P and Vd_b5 for
    vars Vd_b5 and Vd_b5;
  enddef;
  def map between Cdc6 and Vd_b2 for
    vars Vd_b2 and Vd_b2;
  enddef;
  def map between Cdc6 and Vd_b5 for
    vars Vd_b5 and Vd_b5;
  enddef;
  def map between Cdc6 and Vkp_f6 for
    vars Vkp_f6 and Vkp_f6;
  enddef;
  def map between Cdc6P and Vkp_f6 for
    vars Vkp_f6 and Vkp_f6;
  enddef;
  def map between Cdc6P and Vd_b2 for
    vars Vd_b2 and Vd_b2;
  enddef;
  def map between Cdc6P and Vd_b5 for
    vars Vd_b5 and Vd_b5;
  enddef;
  def map between F2 and Vd_b2 for
    vars Vd_b2 and Vd_b2;
  enddef;
  def map between F2 and Vkp_f6 for
    vars Vkp_f6 and Vkp_f6;
  enddef;
  def map between Pds1 and Vd_pds for
    vars Vd_pds and Vd_pds;
  enddef;
  def map between Esp1 and Vd_pds for
    vars Vd_pds and Vd_pds;
  enddef;
  def map between G_sbf and Va_sbf for
    vars Va_sbf and Va_sbf;
  enddef;
  def map between G_sbf and Vi_sbf for
    vars Vi_sbf and Vi_sbf;
  enddef;
  def map between F5 and Vd_b5 for
    vars Vd_b5 and Vd_b5;
  enddef;
  def map between F5 and Vkp_f6 for
    vars Vkp_f6 and Vkp_f6;
  enddef;
  def map between F5P and Vkp_f6 for
    vars Vkp_f6 and Vkp_f6;
  enddef;
  def map between F2P and Vkp_f6 for
    vars Vkp_f6 and Vkp_f6;
  enddef;
  def map between F2P and Vd_b2 for
    vars Vd_b2 and Vd_b2;
  enddef;
  def map between F5P and Vd_b5 for
    vars Vd_b5 and Vd_b5;
  enddef;
  def map between Cdh1 and Va_cdh for
    vars Va_cdh and Va_cdh;
  enddef;
  def map between Cdh1 and Vi_cdh for
    vars Vi_cdh and Vi_cdh;
  enddef;
  def map between Net1 and Vpp_net for
    vars Vpp_net and Vpp_net;
  enddef;
  def map between Net1 and Vkp_net for
    vars Vkp_net and Vkp_net;
  enddef;
  def map between RENT and Vpp_net for
    vars Vpp_net and Vpp_net;
  enddef;
  def map between RENT and Vkp_net for
    vars Vkp_net and Vkp_net;
  enddef;
  def map between PPX and Vd_ppx for
    vars Vd_ppx and Vd_ppx;
  enddef;
  def map between Cdc14 and C2P for
    vars Cdc14 and Cdc14;
  enddef;
  def map between Cdc14 and C5P for
    vars Cdc14 and Cdc14;
  enddef;
  def map between Vkp_f6 and Cln2 for
    vars Cln2 and Cln2;
  enddef;
  def map between Vi_cdh and Clb5 for
    vars Clb5 and Clb5;
  enddef;
  def map between Vi_cdh and Cln2 for
    vars Cln2 and Cln2;
  enddef;
  def map between Vi_cdh and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between Vi_cdh and Cln3 for
    vars Cln3 and Cln3;
  enddef;
  def map between Vkp_f6 and Cdc6_T for
    vars Cdc6_T and Cdc6_T;
  enddef;
  def map between Vpp_net and PPX for
    vars PPX and PPX;
  enddef;
  def map between Vkp_f6 and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between Vkp_f6 and Bck2 for
    vars Bck2 and Bck2;
  enddef;
  def map between Vkp_f6 and Cln3 for
    vars Cln3 and Cln3;
  enddef;
  def map between Vkp_f6 and Clb5 for
    vars Clb5 and Clb5;
  enddef;
enddef;
