<?xml version="1.0"?>
<!--
This CellML file was generated on 5/01/2009 at 11:18:19 at a.m. using:

COR (0.9.31.1125)
Copyright 2002-2009 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="chen_2000" name="chen_2000">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Modelling the Budding Yeast Cell Cycle</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This CellML version of the model has been checked in COR and OpenCell and the model runs to replicate the results in the original published paper. The units have been checked and they are consistent.</para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: The molecular machinery of cell cycle control is known in more detail for budding yeast, Saccharomyces cerevisiae, than for any other eukaryotic organism. In recent years, many elegant experiments on budding yeast have dissected the roles of cyclin molecules (Cln1-3 and Clb1-6) in coordinating the events of DNA synthesis, bud emergence, spindle formation, nuclear division, and cell separation. These experimental clues suggest a mechanism for the principal molecular interactions controlling cyclin synthesis and degradation. Using standard techniques of biochemical kinetics, we convert the mechanism into a set of differential equations, which describe the time courses of three major classes of cyclin-dependent kinase activities. Model in hand, we examine the molecular events controlling "Start" (the commitment step to a new round of chromosome replication, bud formation, and mitosis) and "Finish" (the transition from metaphase to anaphase, when sister chromatids are pulled apart and the bud separates from the mother cell) in wild-type cells and 50 mutants. The model accounts for many details of the physiology, biochemistry, and genetics of cell cycle control in budding yeast.
				</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
					Kinetic Analysis of a Molecular Model of the Budding Yeast Cell Cycle, Katherine C. Chen, Attila Csikasz-Nagy, Bela Gyorffy, John Val, Bela Novak, and John J. Tyson, 2000, 
						<emphasis>Molecular Biology of the Cell</emphasis>
					, 11, 369-391.  <ulink url="http://www.ncbi.nlm.nih.gov/pubmed?term=10637314">PubMed ID: 10637314</ulink>
				</para>
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>reaction diagram</title>
							</objectinfo>
							<imagedata fileref="chen_2000.png"/>
						</imageobject>
					</mediaobject>
					<caption>Molecular model of the control of CDK activities during the budding yeast cell cycle.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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	</rdf:RDF>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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	</rdf:RDF>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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	</rdf:RDF>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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	</rdf:RDF>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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	</rdf:RDF>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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	</rdf:RDF>
	   <units name="nanomolar">
      <unit prefix="nano" units="mole"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="minute">
      <unit multiplier="60" units="second"/>
   </units>
   <units name="flux">
      <unit units="nanomolar"/>
      <unit exponent="-1" units="minute"/>
   </units>
   <units name="first_order_rate_constant">
      <unit exponent="-1" units="minute"/>
   </units>
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="minute"/>
   </component>
   <component name="Cln2">
      <variable cmeta:id="Cln2_Cln2" initial_value="0.0078" name="Cln2" public_interface="out" units="dimensionless"/>
      <variable initial_value="0" name="ks_n2" units="first_order_rate_constant"/>
      <variable initial_value="0.05" name="ks_n2_" units="first_order_rate_constant"/>
      <variable initial_value="0.1" name="kd_n2" units="first_order_rate_constant"/>
      <variable name="mass" public_interface="in" units="dimensionless"/>
      <variable name="SBF" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Cln2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>mass</ci>
                  <apply>
                     <plus/>
                     <ci>ks_n2</ci>
                     <apply>
                        <times/>
                        <ci>ks_n2_</ci>
                        <ci>SBF</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kd_n2</ci>
                  <ci>Cln2</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Clb2_T">
      <variable initial_value="0.2342" name="Clb2_T" public_interface="out" units="dimensionless"/>
      <variable initial_value="1" name="Hct1_T" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.002" name="ks_b2" units="first_order_rate_constant"/>
      <variable initial_value="0.05" name="ks_b2_" units="first_order_rate_constant"/>
      <variable initial_value="0.01" name="kd_b2" units="first_order_rate_constant"/>
      <variable initial_value="2" name="kd_b2_" units="first_order_rate_constant"/>
      <variable initial_value="0.05" name="kd_b2__" units="first_order_rate_constant"/>
      <variable name="Vd_b2" public_interface="out" units="first_order_rate_constant"/>
      <variable name="mass" public_interface="in" units="dimensionless"/>
      <variable name="Mcm1" public_interface="in" units="dimensionless"/>
      <variable name="Hct1" public_interface="in" units="dimensionless"/>
      <variable name="Cdc20" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Clb2_T</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>mass</ci>
                  <apply>
                     <plus/>
                     <ci>ks_b2</ci>
                     <apply>
                        <times/>
                        <ci>ks_b2_</ci>
                        <ci>Mcm1</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>Vd_b2</ci>
                  <ci>Clb2_T</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>Vd_b2</ci>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <ci>kd_b2</ci>
                  <apply>
                     <minus/>
                     <ci>Hct1_T</ci>
                     <ci>Hct1</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kd_b2_</ci>
                  <ci>Hct1</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>kd_b2__</ci>
                  <ci>Cdc20</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Clb2">
      <variable cmeta:id="Clb2_Clb2" name="Clb2" public_interface="out" units="dimensionless"/>
      <variable name="Clb2_Sic1" public_interface="in" units="dimensionless"/>
      <variable name="Clb2_T" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>Clb2</ci>
            <apply>
               <minus/>
               <ci>Clb2_T</ci>
               <ci>Clb2_Sic1</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Clb5">
      <variable cmeta:id="Clb5_Clb5" name="Clb5" public_interface="out" units="dimensionless"/>
      <variable name="Clb5_Sic1" public_interface="in" units="dimensionless"/>
      <variable name="Clb5_T" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>Clb5</ci>
            <apply>
               <minus/>
               <ci>Clb5_T</ci>
               <ci>Clb5_Sic1</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Sic1">
      <variable cmeta:id="Sic1_Sic1" name="Sic1" public_interface="out" units="dimensionless"/>
      <variable name="Clb2_Sic1" public_interface="in" units="dimensionless"/>
      <variable name="Clb5_Sic1" public_interface="in" units="dimensionless"/>
      <variable name="Sic1_T" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>Sic1</ci>
            <apply>
               <minus/>
               <ci>Sic1_T</ci>
               <apply>
                  <plus/>
                  <ci>Clb2_Sic1</ci>
                  <ci>Clb5_Sic1</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Clb5_T">
      <variable initial_value="0.0614" name="Clb5_T" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.006" name="ks_b5" units="first_order_rate_constant"/>
      <variable initial_value="0.02" name="ks_b5_" units="first_order_rate_constant"/>
      <variable initial_value="0.1" name="kd_b5" units="first_order_rate_constant"/>
      <variable initial_value="0.25" name="kd_b5_" units="first_order_rate_constant"/>
      <variable name="Vd_b5" public_interface="out" units="first_order_rate_constant"/>
      <variable name="mass" public_interface="in" units="dimensionless"/>
      <variable name="MBF" public_interface="in" units="dimensionless"/>
      <variable name="Cdc20" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Clb5_T</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>mass</ci>
                  <apply>
                     <plus/>
                     <ci>ks_b5</ci>
                     <apply>
                        <times/>
                        <ci>ks_b5_</ci>
                        <ci>MBF</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>Vd_b5</ci>
                  <ci>Clb5_T</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>Vd_b5</ci>
            <apply>
               <plus/>
               <ci>kd_b5</ci>
               <apply>
                  <times/>
                  <ci>kd_b5_</ci>
                  <ci>Cdc20</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Bck2">
      <variable cmeta:id="Bck2_Bck2" name="Bck2" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.0027" name="Bck2_0" units="dimensionless"/>
      <variable name="mass" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>Bck2</ci>
            <apply>
               <times/>
               <ci>Bck2_0</ci>
               <ci>mass</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Cln3">
      <variable cmeta:id="Cln3_Cln3" name="Cln3" public_interface="out" units="dimensionless"/>
      <variable initial_value="6" name="Jn3" units="dimensionless"/>
      <variable initial_value="1" name="Dn3" units="dimensionless"/>
      <variable initial_value="0.02" name="Cln3_max" units="dimensionless"/>
      <variable name="mass" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>Cln3</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>Cln3_max</ci>
                  <ci>Dn3</ci>
                  <ci>mass</ci>
               </apply>
               <apply>
                  <plus/>
                  <ci>Jn3</ci>
                  <apply>
                     <times/>
                     <ci>Dn3</ci>
                     <ci>mass</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Sic1_T">
      <variable initial_value="0.1231" name="Sic1_T" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.02" name="ks_c1" units="first_order_rate_constant"/>
      <variable initial_value="0.1" name="ks_c1_" units="first_order_rate_constant"/>
      <variable name="kd1_c1" public_interface="in" units="first_order_rate_constant"/>
      <variable name="Jd2_c1" public_interface="in" units="dimensionless"/>
      <variable name="Vd2_c1" public_interface="in" units="first_order_rate_constant"/>
      <variable name="Swi5" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Sic1_T</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <ci>ks_c1</ci>
                  <apply>
                     <times/>
                     <ci>ks_c1_</ci>
                     <ci>Swi5</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>Sic1_T</ci>
                  <apply>
                     <plus/>
                     <ci>kd1_c1</ci>
                     <apply>
                        <divide/>
                        <ci>Vd2_c1</ci>
                        <apply>
                           <plus/>
                           <ci>Jd2_c1</ci>
                           <ci>Sic1_T</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Clb2_Sic1">
      <variable cmeta:id="Clb2_Sic1_Clb2_Sic1" initial_value="0.079" name="Clb2_Sic1" public_interface="out" units="dimensionless"/>
      <variable initial_value="50" name="kas_b2" units="first_order_rate_constant"/>
      <variable initial_value="0.05" name="kdi_b2" units="first_order_rate_constant"/>
      <variable name="Vd_b2" public_interface="in" units="first_order_rate_constant"/>
      <variable name="kd1_c1" public_interface="in" units="first_order_rate_constant"/>
      <variable name="Jd2_c1" public_interface="in" units="dimensionless"/>
      <variable name="Vd2_c1" public_interface="in" units="first_order_rate_constant"/>
      <variable name="Sic1_T" public_interface="in" units="dimensionless"/>
      <variable name="Sic1" public_interface="in" units="dimensionless"/>
      <variable name="Clb2" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Clb2_Sic1</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>kas_b2</ci>
                  <ci>Clb2</ci>
                  <ci>Sic1</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>Clb2_Sic1</ci>
                  <apply>
                     <plus/>
                     <ci>kdi_b2</ci>
                     <ci>Vd_b2</ci>
                     <ci>kd1_c1</ci>
                     <apply>
                        <divide/>
                        <ci>Vd2_c1</ci>
                        <apply>
                           <plus/>
                           <ci>Jd2_c1</ci>
                           <ci>Sic1_T</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Clb5_Sic1">
      <variable cmeta:id="Clb5_Sic1_Clb5_Sic1" initial_value="0.0207" name="Clb5_Sic1" public_interface="out" units="dimensionless"/>
      <variable initial_value="50" name="kas_b5" units="first_order_rate_constant"/>
      <variable initial_value="0.05" name="kdi_b5" units="first_order_rate_constant"/>
      <variable name="Vd_b5" public_interface="in" units="first_order_rate_constant"/>
      <variable name="kd1_c1" public_interface="in" units="first_order_rate_constant"/>
      <variable name="Jd2_c1" public_interface="in" units="dimensionless"/>
      <variable name="Vd2_c1" public_interface="in" units="first_order_rate_constant"/>
      <variable name="Sic1_T" public_interface="in" units="dimensionless"/>
      <variable name="Sic1" public_interface="in" units="dimensionless"/>
      <variable name="Clb5" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Clb5_Sic1</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>kas_b5</ci>
                  <ci>Clb5</ci>
                  <ci>Sic1</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>Clb5_Sic1</ci>
                  <apply>
                     <plus/>
                     <ci>kdi_b5</ci>
                     <ci>Vd_b5</ci>
                     <ci>kd1_c1</ci>
                     <apply>
                        <divide/>
                        <ci>Vd2_c1</ci>
                        <apply>
                           <plus/>
                           <ci>Jd2_c1</ci>
                           <ci>Sic1_T</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Vd2_c1">
      <variable name="Vd2_c1" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.3" name="kd2_c1" units="first_order_rate_constant"/>
      <variable initial_value="20" name="epsilonc1_n3" units="dimensionless"/>
      <variable initial_value="2" name="epsilonc1_k2" units="dimensionless"/>
      <variable initial_value="1" name="epsilonc1_b5" units="dimensionless"/>
      <variable initial_value="0.067" name="epsilonc1_b2" units="dimensionless"/>
      <variable name="Cln3" public_interface="in" units="dimensionless"/>
      <variable name="Bck2" public_interface="in" units="dimensionless"/>
      <variable name="Cln2" public_interface="in" units="dimensionless"/>
      <variable name="Clb5" public_interface="in" units="dimensionless"/>
      <variable name="Clb2" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>Vd2_c1</ci>
            <apply>
               <times/>
               <ci>kd2_c1</ci>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>epsilonc1_n3</ci>
                     <ci>Cln3</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>epsilonc1_k2</ci>
                     <ci>Bck2</ci>
                  </apply>
                  <ci>Cln2</ci>
                  <apply>
                     <times/>
                     <ci>epsilonc1_b5</ci>
                     <ci>Clb5</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>epsilonc1_b2</ci>
                     <ci>Clb2</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Cdc20_T">
      <variable initial_value="0.8332" name="Cdc20_T" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.005" name="ks_20" units="first_order_rate_constant"/>
      <variable initial_value="0.06" name="ks_20_" units="first_order_rate_constant"/>
      <variable name="kd_20" public_interface="in" units="first_order_rate_constant"/>
      <variable name="Clb2" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Cdc20_T</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <ci>ks_20</ci>
                  <apply>
                     <times/>
                     <ci>ks_20_</ci>
                     <ci>Clb2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kd_20</ci>
                  <ci>Cdc20_T</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Cdc20">
      <variable cmeta:id="Cdc20_Cdc20" initial_value="0.6848" name="Cdc20" public_interface="out" units="dimensionless"/>
      <variable initial_value="1" name="ka_20" units="first_order_rate_constant"/>
      <variable initial_value="0.1" name="ki_20" units="first_order_rate_constant"/>
      <variable initial_value="10" name="ki_20_" units="first_order_rate_constant"/>
      <variable name="Vi_20" public_interface="out" units="first_order_rate_constant"/>
      <variable name="kd_20" public_interface="in" units="first_order_rate_constant"/>
      <variable name="Cdc20_T" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <variable name="ORI" public_interface="in" units="dimensionless"/>
      <variable name="SPN" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Cdc20</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>ka_20</ci>
                  <apply>
                     <minus/>
                     <ci>Cdc20_T</ci>
                     <ci>Cdc20</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>Cdc20</ci>
                  <apply>
                     <plus/>
                     <ci>Vi_20</ci>
                     <ci>kd_20</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>Vi_20</ci>
            <piecewise>
               <piece>
                  <ci>ki_20_</ci>
                  <apply>
                     <geq/>
                     <ci>ORI</ci>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  </apply>
               </piece>
               <piece>
                  <ci>ki_20</ci>
                  <apply>
                     <geq/>
                     <ci>SPN</ci>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  </apply>
               </piece>
               <otherwise>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="first_order_rate_constant">0.1</cn>
               </otherwise>
            </piecewise>
         </apply>
      </math>
   </component>
   <component name="Hct1">
      <variable cmeta:id="Hct1_Hct1" initial_value="0.9946" name="Hct1" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.04" name="ka_t1" units="first_order_rate_constant"/>
      <variable initial_value="2" name="ka_t1_" units="first_order_rate_constant"/>
      <variable initial_value="0" name="ki_t1" units="first_order_rate_constant"/>
      <variable initial_value="0.64" name="ki_t1_" units="first_order_rate_constant"/>
      <variable name="Vi_t1" units="first_order_rate_constant"/>
      <variable initial_value="0.05" name="Ji_t1" units="dimensionless"/>
      <variable initial_value="0.05" name="Ja_t1" units="dimensionless"/>
      <variable initial_value="1" name="epsiloni_t1_n2" units="dimensionless"/>
      <variable initial_value="0.5" name="epsiloni_t1_b5" units="dimensionless"/>
      <variable initial_value="1" name="epsiloni_t1_b2" units="dimensionless"/>
      <variable name="Cdc20" public_interface="in" units="dimensionless"/>
      <variable name="Hct1_T" public_interface="in" units="dimensionless"/>
      <variable name="Cln3" public_interface="in" units="dimensionless"/>
      <variable name="Clb5" public_interface="in" units="dimensionless"/>
      <variable name="Cln2" public_interface="in" units="dimensionless"/>
      <variable name="Clb2" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Hct1</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <apply>
                        <plus/>
                        <ci>ka_t1</ci>
                        <apply>
                           <times/>
                           <ci>ka_t1_</ci>
                           <ci>Cdc20</ci>
                        </apply>
                     </apply>
                     <apply>
                        <minus/>
                        <ci>Hct1_T</ci>
                        <ci>Hct1</ci>
                     </apply>
                  </apply>
                  <apply>
                     <minus/>
                     <apply>
                        <plus/>
                        <ci>Ja_t1</ci>
                        <ci>Hct1_T</ci>
                     </apply>
                     <ci>Hct1</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>Vi_t1</ci>
                     <ci>Hct1</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>Ji_t1</ci>
                     <ci>Hct1</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>Vi_t1</ci>
            <apply>
               <plus/>
               <ci>ki_t1</ci>
               <apply>
                  <times/>
                  <ci>ki_t1_</ci>
                  <apply>
                     <plus/>
                     <ci>Cln3</ci>
                     <apply>
                        <times/>
                        <ci>epsiloni_t1_n2</ci>
                        <ci>Cln2</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>epsiloni_t1_b5</ci>
                        <ci>Clb5</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>epsiloni_t1_b2</ci>
                        <ci>Clb2</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="mass">
      <variable initial_value="0.6608" name="mass" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.005776" name="mu" units="first_order_rate_constant"/>
      <variable name="Clb2" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>mass</ci>
            </apply>
            <apply>
               <times/>
               <ci>mu</ci>
               <ci>mass</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="ORI">
      <variable initial_value="0" name="ORI" public_interface="out" units="dimensionless"/>
      <variable initial_value="2" name="ks_ori" units="first_order_rate_constant"/>
      <variable initial_value="0.06" name="kd_ori" units="first_order_rate_constant"/>
      <variable initial_value="0.4" name="epsilonori_b2" units="dimensionless"/>
      <variable name="Clb5" public_interface="in" units="dimensionless"/>
      <variable name="Clb2" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>ORI</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>ks_ori</ci>
                  <apply>
                     <plus/>
                     <ci>Clb5</ci>
                     <apply>
                        <times/>
                        <ci>epsilonori_b2</ci>
                        <ci>Clb2</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kd_ori</ci>
                  <ci>ORI</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="BUD">
      <variable initial_value="0" name="BUD" units="dimensionless"/>
      <variable initial_value="0.3" name="ks_bud" units="first_order_rate_constant"/>
      <variable initial_value="0.06" name="kd_bud" units="first_order_rate_constant"/>
      <variable initial_value="1" name="epsilonbud_b5" units="dimensionless"/>
      <variable name="Clb5" public_interface="in" units="dimensionless"/>
      <variable name="Cln2" public_interface="in" units="dimensionless"/>
      <variable name="Clb2" public_interface="in" units="dimensionless"/>
      <variable name="Cln3" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>BUD</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>ks_bud</ci>
                  <apply>
                     <plus/>
                     <ci>Cln2</ci>
                     <ci>Cln3</ci>
                     <apply>
                        <times/>
                        <ci>epsilonbud_b5</ci>
                        <ci>Clb5</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kd_bud</ci>
                  <ci>BUD</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="SPN">
      <variable initial_value="0" name="SPN" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.08" name="ks_spn" units="first_order_rate_constant"/>
      <variable initial_value="0.06" name="kd_spn" units="first_order_rate_constant"/>
      <variable initial_value="0.2" name="J_spn" units="dimensionless"/>
      <variable name="Clb2" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>SPN</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>ks_spn</ci>
                     <ci>Clb2</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>J_spn</ci>
                     <ci>Clb2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kd_spn</ci>
                  <ci>SPN</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="SBF">
      <variable cmeta:id="SBF_SBF" name="SBF" public_interface="out" units="dimensionless"/>
      <variable initial_value="1" name="ka_sbf" units="first_order_rate_constant"/>
      <variable initial_value="0.5" name="ki_sbf" units="first_order_rate_constant"/>
      <variable initial_value="6" name="ki_sbf_" units="first_order_rate_constant"/>
      <variable name="Va_sbf" units="first_order_rate_constant"/>
      <variable initial_value="0.01" name="Ji_sbf" units="dimensionless"/>
      <variable initial_value="0.01" name="Ja_sbf" units="dimensionless"/>
      <variable initial_value="75" name="epsilonsbf_n3" units="dimensionless"/>
      <variable initial_value="0.5" name="epsilonsbf_b5" units="dimensionless"/>
      <variable name="Bck2" public_interface="in" units="dimensionless"/>
      <variable name="Cln3" public_interface="in" units="dimensionless"/>
      <variable name="Clb5" public_interface="in" units="dimensionless"/>
      <variable name="Cln2" public_interface="in" units="dimensionless"/>
      <variable name="Clb2" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>SBF</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                  <ci>Va_sbf</ci>
                  <ci>Ji_sbf</ci>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <apply>
                        <plus/>
                        <ci>ki_sbf</ci>
                        <apply>
                           <times/>
                           <ci>ki_sbf_</ci>
                           <ci>Clb2</ci>
                        </apply>
                        <apply>
                           <times/>
                           <ci>Va_sbf</ci>
                           <ci>Ji_sbf</ci>
                        </apply>
                        <apply>
                           <times/>
                           <apply>
                              <plus/>
                              <ci>ki_sbf</ci>
                              <apply>
                                 <times/>
                                 <ci>ki_sbf_</ci>
                                 <ci>Clb2</ci>
                              </apply>
                           </apply>
                           <ci>Ja_sbf</ci>
                        </apply>
                     </apply>
                     <ci>Va_sbf</ci>
                  </apply>
                  <apply>
                     <root/>
                     <apply>
                        <minus/>
                        <apply>
                           <power/>
                           <apply>
                              <minus/>
                              <apply>
                                 <plus/>
                                 <ci>ki_sbf</ci>
                                 <apply>
                                    <times/>
                                    <ci>ki_sbf_</ci>
                                    <ci>Clb2</ci>
                                 </apply>
                                 <apply>
                                    <times/>
                                    <ci>Va_sbf</ci>
                                    <ci>Ji_sbf</ci>
                                 </apply>
                                 <apply>
                                    <times/>
                                    <apply>
                                       <plus/>
                                       <ci>ki_sbf</ci>
                                       <apply>
                                          <times/>
                                          <ci>ki_sbf_</ci>
                                          <ci>Clb2</ci>
                                       </apply>
                                    </apply>
                                    <ci>Ja_sbf</ci>
                                 </apply>
                              </apply>
                              <ci>Va_sbf</ci>
                           </apply>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                           <times/>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                           <ci>Va_sbf</ci>
                           <ci>Ji_sbf</ci>
                           <apply>
                              <minus/>
                              <apply>
                                 <plus/>
                                 <ci>ki_sbf</ci>
                                 <apply>
                                    <times/>
                                    <ci>ki_sbf_</ci>
                                    <ci>Clb2</ci>
                                 </apply>
                              </apply>
                              <ci>Va_sbf</ci>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>Va_sbf</ci>
            <apply>
               <times/>
               <ci>ka_sbf</ci>
               <apply>
                  <plus/>
                  <ci>Cln2</ci>
                  <apply>
                     <times/>
                     <ci>epsilonsbf_n3</ci>
                     <apply>
                        <plus/>
                        <ci>Cln3</ci>
                        <ci>Bck2</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>epsilonsbf_b5</ci>
                     <ci>Clb5</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="MBF">
      <variable cmeta:id="MBF_MBF" name="MBF" public_interface="out" units="dimensionless"/>
      <variable name="SBF" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>MBF</ci>
            <ci>SBF</ci>
         </apply>
      </math>
   </component>
   <component name="Mcm1">
      <variable cmeta:id="Mcm1_Mcm1" name="Mcm1" public_interface="out" units="dimensionless"/>
      <variable initial_value="1" name="ka_mcm" units="first_order_rate_constant"/>
      <variable initial_value="0.15" name="ki_mcm" units="first_order_rate_constant"/>
      <variable initial_value="1" name="Ji_mcm" units="dimensionless"/>
      <variable initial_value="1" name="Ja_mcm" units="dimensionless"/>
      <variable name="Clb2" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>Mcm1</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                  <ci>ka_mcm</ci>
                  <ci>Clb2</ci>
                  <ci>Ji_mcm</ci>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <apply>
                        <plus/>
                        <ci>ki_mcm</ci>
                        <apply>
                           <times/>
                           <ci>ka_mcm</ci>
                           <ci>Clb2</ci>
                           <ci>Ji_mcm</ci>
                        </apply>
                        <apply>
                           <times/>
                           <ci>ki_mcm</ci>
                           <ci>Ja_mcm</ci>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>ka_mcm</ci>
                        <ci>Clb2</ci>
                     </apply>
                  </apply>
                  <apply>
                     <root/>
                     <apply>
                        <minus/>
                        <apply>
                           <power/>
                           <apply>
                              <minus/>
                              <apply>
                                 <plus/>
                                 <ci>ki_mcm</ci>
                                 <apply>
                                    <times/>
                                    <ci>ka_mcm</ci>
                                    <ci>Clb2</ci>
                                    <ci>Ji_mcm</ci>
                                 </apply>
                                 <apply>
                                    <times/>
                                    <ci>ki_mcm</ci>
                                    <ci>Ja_mcm</ci>
                                 </apply>
                              </apply>
                              <apply>
                                 <times/>
                                 <ci>ka_mcm</ci>
                                 <ci>Clb2</ci>
                              </apply>
                           </apply>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                           <times/>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                           <apply>
                              <minus/>
                              <ci>ki_mcm</ci>
                              <apply>
                                 <times/>
                                 <ci>ka_mcm</ci>
                                 <ci>Clb2</ci>
                              </apply>
                           </apply>
                           <ci>ka_mcm</ci>
                           <ci>Clb2</ci>
                           <ci>Ji_mcm</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Swi5">
      <variable cmeta:id="Swi5_Swi5" name="Swi5" public_interface="out" units="dimensionless"/>
      <variable initial_value="1" name="ka_swi" units="first_order_rate_constant"/>
      <variable initial_value="0.3" name="ki_swi" units="first_order_rate_constant"/>
      <variable initial_value="0.2" name="ki_swi_" units="first_order_rate_constant"/>
      <variable initial_value="0.1" name="Ji_swi" units="dimensionless"/>
      <variable initial_value="0.1" name="Ja_swi" units="dimensionless"/>
      <variable name="Cdc20" public_interface="in" units="dimensionless"/>
      <variable name="Clb2" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>Swi5</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                  <ci>ka_swi</ci>
                  <ci>Cdc20</ci>
                  <ci>Ji_swi</ci>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <apply>
                        <plus/>
                        <ci>ki_swi</ci>
                        <apply>
                           <times/>
                           <ci>ki_swi_</ci>
                           <ci>Clb2</ci>
                        </apply>
                        <apply>
                           <times/>
                           <ci>ka_swi</ci>
                           <ci>Cdc20</ci>
                           <ci>Ji_swi</ci>
                        </apply>
                        <apply>
                           <times/>
                           <apply>
                              <plus/>
                              <ci>ki_swi</ci>
                              <apply>
                                 <times/>
                                 <ci>ki_swi_</ci>
                                 <ci>Clb2</ci>
                              </apply>
                           </apply>
                           <ci>Ja_swi</ci>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>ka_swi</ci>
                        <ci>Cdc20</ci>
                     </apply>
                  </apply>
                  <apply>
                     <root/>
                     <apply>
                        <minus/>
                        <apply>
                           <power/>
                           <apply>
                              <minus/>
                              <apply>
                                 <plus/>
                                 <ci>ki_swi</ci>
                                 <apply>
                                    <times/>
                                    <ci>ki_swi_</ci>
                                    <ci>Clb2</ci>
                                 </apply>
                                 <apply>
                                    <times/>
                                    <ci>ka_swi</ci>
                                    <ci>Cdc20</ci>
                                    <ci>Ji_swi</ci>
                                 </apply>
                                 <apply>
                                    <times/>
                                    <apply>
                                       <plus/>
                                       <ci>ki_swi</ci>
                                       <apply>
                                          <times/>
                                          <ci>ki_swi_</ci>
                                          <ci>Clb2</ci>
                                       </apply>
                                    </apply>
                                    <ci>Ja_swi</ci>
                                 </apply>
                              </apply>
                              <apply>
                                 <times/>
                                 <ci>ka_swi</ci>
                                 <ci>Cdc20</ci>
                              </apply>
                           </apply>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                           <times/>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                           <apply>
                              <minus/>
                              <apply>
                                 <plus/>
                                 <ci>ki_swi</ci>
                                 <apply>
                                    <times/>
                                    <ci>ki_swi_</ci>
                                    <ci>Clb2</ci>
                                 </apply>
                              </apply>
                              <apply>
                                 <times/>
                                 <ci>ka_swi</ci>
                                 <ci>Cdc20</ci>
                              </apply>
                           </apply>
                           <ci>ka_swi</ci>
                           <ci>Cdc20</ci>
                           <ci>Ji_swi</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="parameters">
      <variable initial_value="0.01" name="kd1_c1" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.08" name="kd_20" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.05" name="Jd2_c1" public_interface="out" units="dimensionless"/>
   </component>
   <connection>
      <map_components component_1="Cln2" component_2="SBF"/>
      <map_variables variable_1="SBF" variable_2="SBF"/>
      <map_variables variable_1="Cln2" variable_2="Cln2"/>
   </connection>
   <connection>
      <map_components component_1="Cln2" component_2="Vd2_c1"/>
      <map_variables variable_1="Cln2" variable_2="Cln2"/>
   </connection>
   <connection>
      <map_components component_1="Cln2" component_2="Hct1"/>
      <map_variables variable_1="Cln2" variable_2="Cln2"/>
   </connection>
   <connection>
      <map_components component_1="Cln2" component_2="BUD"/>
      <map_variables variable_1="Cln2" variable_2="Cln2"/>
   </connection>
   <connection>
      <map_components component_1="Clb2_T" component_2="Clb2"/>
      <map_variables variable_1="Clb2_T" variable_2="Clb2_T"/>
   </connection>
   <connection>
      <map_components component_1="Clb2_T" component_2="Mcm1"/>
      <map_variables variable_1="Mcm1" variable_2="Mcm1"/>
   </connection>
   <connection>
      <map_components component_1="Clb2_T" component_2="Cdc20"/>
      <map_variables variable_1="Cdc20" variable_2="Cdc20"/>
   </connection>
   <connection>
      <map_components component_1="Clb2_T" component_2="Hct1"/>
      <map_variables variable_1="Hct1" variable_2="Hct1"/>
      <map_variables variable_1="Hct1_T" variable_2="Hct1_T"/>
   </connection>
   <connection>
      <map_components component_1="Clb5_T" component_2="Clb5"/>
      <map_variables variable_1="Clb5_T" variable_2="Clb5_T"/>
   </connection>
   <connection>
      <map_components component_1="Clb5_T" component_2="Clb5_Sic1"/>
      <map_variables variable_1="Vd_b5" variable_2="Vd_b5"/>
   </connection>
   <connection>
      <map_components component_1="Clb5_T" component_2="MBF"/>
      <map_variables variable_1="MBF" variable_2="MBF"/>
   </connection>
   <connection>
      <map_components component_1="Clb5_T" component_2="Cdc20"/>
      <map_variables variable_1="Cdc20" variable_2="Cdc20"/>
   </connection>
   <connection>
      <map_components component_1="Bck2" component_2="Vd2_c1"/>
      <map_variables variable_1="Bck2" variable_2="Bck2"/>
   </connection>
   <connection>
      <map_components component_1="Bck2" component_2="SBF"/>
      <map_variables variable_1="Bck2" variable_2="Bck2"/>
   </connection>
   <connection>
      <map_components component_1="Cln3" component_2="Vd2_c1"/>
      <map_variables variable_1="Cln3" variable_2="Cln3"/>
   </connection>
   <connection>
      <map_components component_1="Cln3" component_2="SBF"/>
      <map_variables variable_1="Cln3" variable_2="Cln3"/>
   </connection>
   <connection>
      <map_components component_1="Cln3" component_2="Hct1"/>
      <map_variables variable_1="Cln3" variable_2="Cln3"/>
   </connection>
   <connection>
      <map_components component_1="Cln3" component_2="BUD"/>
      <map_variables variable_1="Cln3" variable_2="Cln3"/>
   </connection>
   <connection>
      <map_components component_1="Clb2" component_2="Clb2_Sic1"/>
      <map_variables variable_1="Clb2" variable_2="Clb2"/>
      <map_variables variable_1="Clb2_Sic1" variable_2="Clb2_Sic1"/>
   </connection>
   <connection>
      <map_components component_1="Clb2" component_2="Cdc20_T"/>
      <map_variables variable_1="Clb2" variable_2="Clb2"/>
   </connection>
   <connection>
      <map_components component_1="Clb2" component_2="Hct1"/>
      <map_variables variable_1="Clb2" variable_2="Clb2"/>
   </connection>
   <connection>
      <map_components component_1="Clb2" component_2="ORI"/>
      <map_variables variable_1="Clb2" variable_2="Clb2"/>
   </connection>
   <connection>
      <map_components component_1="Clb2" component_2="SPN"/>
      <map_variables variable_1="Clb2" variable_2="Clb2"/>
   </connection>
   <connection>
      <map_components component_1="Clb2" component_2="BUD"/>
      <map_variables variable_1="Clb2" variable_2="Clb2"/>
   </connection>
   <connection>
      <map_components component_1="Clb2" component_2="SBF"/>
      <map_variables variable_1="Clb2" variable_2="Clb2"/>
   </connection>
   <connection>
      <map_components component_1="Clb2" component_2="Mcm1"/>
      <map_variables variable_1="Clb2" variable_2="Clb2"/>
   </connection>
   <connection>
      <map_components component_1="Clb2" component_2="Swi5"/>
      <map_variables variable_1="Clb2" variable_2="Clb2"/>
   </connection>
   <connection>
      <map_components component_1="Clb5" component_2="Clb5_Sic1"/>
      <map_variables variable_1="Clb5" variable_2="Clb5"/>
      <map_variables variable_1="Clb5_Sic1" variable_2="Clb5_Sic1"/>
   </connection>
   <connection>
      <map_components component_1="Clb5" component_2="Hct1"/>
      <map_variables variable_1="Clb5" variable_2="Clb5"/>
   </connection>
   <connection>
      <map_components component_1="Clb5" component_2="Vd2_c1"/>
      <map_variables variable_1="Clb5" variable_2="Clb5"/>
   </connection>
   <connection>
      <map_components component_1="Clb2" component_2="Vd2_c1"/>
      <map_variables variable_1="Clb2" variable_2="Clb2"/>
   </connection>
   <connection>
      <map_components component_1="Clb5" component_2="ORI"/>
      <map_variables variable_1="Clb5" variable_2="Clb5"/>
   </connection>
   <connection>
      <map_components component_1="Clb5" component_2="BUD"/>
      <map_variables variable_1="Clb5" variable_2="Clb5"/>
   </connection>
   <connection>
      <map_components component_1="Clb5" component_2="SBF"/>
      <map_variables variable_1="Clb5" variable_2="Clb5"/>
   </connection>
   <connection>
      <map_components component_1="Sic1" component_2="Clb2_Sic1"/>
      <map_variables variable_1="Sic1" variable_2="Sic1"/>
      <map_variables variable_1="Clb2_Sic1" variable_2="Clb2_Sic1"/>
   </connection>
   <connection>
      <map_components component_1="Sic1" component_2="Clb5_Sic1"/>
      <map_variables variable_1="Sic1" variable_2="Sic1"/>
      <map_variables variable_1="Clb5_Sic1" variable_2="Clb5_Sic1"/>
   </connection>
   <connection>
      <map_components component_1="Sic1" component_2="Sic1_T"/>
      <map_variables variable_1="Sic1_T" variable_2="Sic1_T"/>
   </connection>
   <connection>
      <map_components component_1="Sic1_T" component_2="Swi5"/>
      <map_variables variable_1="Swi5" variable_2="Swi5"/>
   </connection>
   <connection>
      <map_components component_1="Sic1_T" component_2="Vd2_c1"/>
      <map_variables variable_1="Vd2_c1" variable_2="Vd2_c1"/>
   </connection>
   <connection>
      <map_components component_1="Sic1_T" component_2="Clb2_Sic1"/>
      <map_variables variable_1="Sic1_T" variable_2="Sic1_T"/>
   </connection>
   <connection>
      <map_components component_1="Clb2_T" component_2="Clb2_Sic1"/>
      <map_variables variable_1="Vd_b2" variable_2="Vd_b2"/>
   </connection>
   <connection>
      <map_components component_1="Clb2_Sic1" component_2="Vd2_c1"/>
      <map_variables variable_1="Vd2_c1" variable_2="Vd2_c1"/>
   </connection>
   <connection>
      <map_components component_1="Sic1_T" component_2="Clb5_Sic1"/>
      <map_variables variable_1="Sic1_T" variable_2="Sic1_T"/>
   </connection>
   <connection>
      <map_components component_1="Clb5_Sic1" component_2="Vd2_c1"/>
      <map_variables variable_1="Vd2_c1" variable_2="Vd2_c1"/>
   </connection>
   <connection>
      <map_components component_1="Cdc20" component_2="Cdc20_T"/>
      <map_variables variable_1="Cdc20_T" variable_2="Cdc20_T"/>
   </connection>
   <connection>
      <map_components component_1="Cdc20" component_2="ORI"/>
      <map_variables variable_1="ORI" variable_2="ORI"/>
   </connection>
   <connection>
      <map_components component_1="Cdc20" component_2="SPN"/>
      <map_variables variable_1="SPN" variable_2="SPN"/>
   </connection>
   <connection>
      <map_components component_1="Hct1" component_2="Cdc20"/>
      <map_variables variable_1="Cdc20" variable_2="Cdc20"/>
   </connection>
   <connection>
      <map_components component_1="mass" component_2="Cln2"/>
      <map_variables variable_1="mass" variable_2="mass"/>
   </connection>
   <connection>
      <map_components component_1="mass" component_2="Clb2"/>
      <map_variables variable_1="Clb2" variable_2="Clb2"/>
   </connection>
   <connection>
      <map_components component_1="mass" component_2="Clb2_T"/>
      <map_variables variable_1="mass" variable_2="mass"/>
   </connection>
   <connection>
      <map_components component_1="mass" component_2="Clb5_T"/>
      <map_variables variable_1="mass" variable_2="mass"/>
   </connection>
   <connection>
      <map_components component_1="mass" component_2="Bck2"/>
      <map_variables variable_1="mass" variable_2="mass"/>
   </connection>
   <connection>
      <map_components component_1="mass" component_2="Cln3"/>
      <map_variables variable_1="mass" variable_2="mass"/>
   </connection>
   <connection>
      <map_components component_1="Swi5" component_2="Cdc20"/>
      <map_variables variable_1="Cdc20" variable_2="Cdc20"/>
   </connection>
   <connection>
      <map_components component_1="Clb2_Sic1" component_2="parameters"/>
      <map_variables variable_1="kd1_c1" variable_2="kd1_c1"/>
      <map_variables variable_1="Jd2_c1" variable_2="Jd2_c1"/>
   </connection>
   <connection>
      <map_components component_1="Clb5_Sic1" component_2="parameters"/>
      <map_variables variable_1="kd1_c1" variable_2="kd1_c1"/>
      <map_variables variable_1="Jd2_c1" variable_2="Jd2_c1"/>
   </connection>
   <connection>
      <map_components component_1="Sic1_T" component_2="parameters"/>
      <map_variables variable_1="kd1_c1" variable_2="kd1_c1"/>
      <map_variables variable_1="Jd2_c1" variable_2="Jd2_c1"/>
   </connection>
   <connection>
      <map_components component_1="Cdc20_T" component_2="parameters"/>
      <map_variables variable_1="kd_20" variable_2="kd_20"/>
   </connection>
   <connection>
      <map_components component_1="Cdc20" component_2="parameters"/>
      <map_variables variable_1="kd_20" variable_2="kd_20"/>
   </connection>
   <connection>
      <map_components component_1="SBF" component_2="MBF"/>
      <map_variables variable_1="SBF" variable_2="SBF"/>
   </connection>
   <connection>
      <map_components component_1="Cln2" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="Clb2_T" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="Clb5_T" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="Sic1_T" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="Clb2_Sic1" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="Clb5_Sic1" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="Cdc20" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="Cdc20_T" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="Hct1" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="mass" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="ORI" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="BUD" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="SPN" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>



<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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  <rdf:Description rdf:about="rdf:#caa145d8-bb12-40e4-bc3c-e7e835678629">
    <bqs:Pubmed_id xmlns:bqs="http://www.cellml.org/bqs/1.0#">10637314</bqs:Pubmed_id>
    <bqs:JournalArticle xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#1a776e5c-7267-4958-81cc-0042fce70655"/>
  </rdf:Description>
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  <rdf:Description rdf:about="#chen_2000">
    <ns7:simulation xmlns:ns7="http://www.cellml.org/metadata/simulation/1.0#" rdf:resource="rdf:#$Mb3pH1"/>
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Chen et al.'s kinetic analysis of a molecular model of the budding yeast cell cycle.</dc:title>
    <cmeta:comment rdf:resource="rdf:#2dfe64d1-04f4-4b9d-8db1-98b9492d86f1"/>
    <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#1146a121-77bf-4d1f-851f-d24dc79b754e"/>
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  </rdf:Description>
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  <rdf:Description rdf:about="rdf:#2dfe64d1-04f4-4b9d-8db1-98b9492d86f1">
    <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#defc5ec9-b688-45d8-83fc-a6ecbc230e5e"/>
    <rdf:value>This is the CellML description of Chen et al.'s kinetic analysis of a molecular model of the budding yeast cell cycle.</rdf:value>
  </rdf:Description>
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</rdf:RDF>
</model>