// This CellML file was generated on 15/12/2008 at 9:48:52 at a.m. using:
//
// COR (0.9.31.1125)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// publisher: The University of Auckland, Auckland Bioengineering Institute
// comment: FN Jeelean Lim; This CellML version of the model has been checked in COR and PCEnv and the model runs to replicate the results in the original published paper. The units have been checked and are consistent. The model was checked against the XPP code as there is an inconsistency between the code and the published equation for the variable 'PSwe1'.
// created: W3CDTF 2004-01-05T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2009-02-18T12:25:53+13:00; Added cmeta id's to several variables; Given Jeelean; Family Lim
// modification: W3CDTF 2008-12-15T11:28:11+13:00; Some variable names were modified to distinguish between the normal and the active form of several proteins. Initial conditions were made dimensionless in order to balance units. The equation for PSwe1 was corrected to match the XPP code instead of the published report, in order to reproduce the published graphs.; Given Jeelean; Family Lim
// simulation: endingValue 150
// title: Ciliberto et al.'s 2003 mathematical model of the morphogenesis checkpoint in the budding yeast cell cycle.
// comment: FN Catherine Lloyd; This is the CellML description of Ciliberto et al.'s 2003 mathematical model of the morphogenesis checkpoint in the budding yeast cell cycle.
// reference: Pubmed_id 14691135; Given Andrea; Family Ciliberto; Given Bela; Family Novak; Given John; Family Tyson; Other J; title Mathematical Model of the Morphogenesis Checkpoint in Budding Yeast; volume 163; first_page 1243; title The Journal Of Cell Biology; W3CDTF 2003-12-22; last_page 1254
// reference: subject_type keyword; cell cycle
// reference: subject_type keyword; morphogenesis; cell cycle
// species: Saccharomyces cerevisiae
def model ciliberto_2003 as
  // Modelling the Morphogenesis Checkpoint in the Budding Yeast Cell Cycle
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML version of the model has been checked in COR and OpenCell and the model runs to replicate the results in the original published paper. The model was checked against the XPP (http://jcb.rupress.org/cgi/content/full/jcb.200306139/DC1) code as there is an inconsistency between the code and the published equation for the variable 'PSwe1'. The units have been checked and they are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: The morphogenesis checkpoint in budding yeast delays progression through the cell cycle in response to stimuli that prevent bud formation. Central to the checkpoint mechanism is Swe1 kinase: normally inactive, its activation halts cell cycle progression in G2. We propose a molecular network for Swe1 control, based on published observations of budding yeast and analogous control signals in fission yeast. The proposed Swe1 network is merged with a model of cyclin-dependent kinase regulation, converted into a set of differential equations and studied by numerical simulation. The simulations accurately reproduce the phenotypes of a dozen checkpoint mutants. Among other predictions, the model attributes a new role to Hsl1, a kinase known to play a role in Swe1 degradation: Hsl1 must also be indirectly responsible for potent inhibition of Swe1 activity. The model supports the idea that the morphogenesis checkpoint, like other checkpoints, raises the cell size threshold for progression from one phase of the cell cycle to the next.
  //
  // The original paper reference is cited below:
  //
  // Mathematical model of the morphogenesis checkpoint in budding yeast, Andrea Ciliberto, Bela Novak, and John J. Tyson, 2003, The Journal of Cell Biology , 163, 1243-1254. PubMed ID: 14691135 (http://www.ncbi.nlm.nih.gov/pubmed/14691135)
  //
  // reaction diagram1
  //
  // A schematic diagram of the molecular mechanisms underlying the regulation of the cell cycle in budding yeast.
  //
  // reaction diagram2
  //
  // A schematic diagram of the Swe1 box - a process which is central to the morphogenesis checkpoint in budding yeast.
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  def comp Clb2 as
    var Clb2: dimensionless {init: 0.184, pub: out};
    var epsilon: dimensionless {init: 0.5};
    var Jm: dimensionless {init: 10};
    var ks_clb: first_order_rate_constant {init: 0.015};
    var kd_clb_1: first_order_rate_constant {pub: in};
    var kd_clb_2: first_order_rate_constant {pub: in};
    var kd_clb_3: first_order_rate_constant {pub: in};
    var kswe: first_order_rate_constant {pub: in};
    var kmih: first_order_rate_constant {pub: in};
    var kass: first_order_rate_constant {pub: in};
    var kdiss: first_order_rate_constant {pub: in};
    var kd_sic: first_order_rate_constant {pub: in};
    var kd_sic_1: first_order_rate_constant {pub: in};
    var kd_sic_2: first_order_rate_constant {pub: in};
    var M: dimensionless {pub: in};
    var Mcm_a: dimensionless {pub: in};
    var Cdh1_a: dimensionless {pub: in};
    var Cdc20_a: dimensionless {pub: in};
    var Sic1: dimensionless {pub: in};
    var PClb2: dimensionless {pub: in};
    var Trim: dimensionless {pub: in};
    var Cln: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Clb2, time) = ks_clb*(epsilon+Mcm_a)*M/(1{dimensionless}+M/Jm)+kmih*PClb2+kdiss*Trim+(kd_sic+kd_sic_1*Cln+kd_sic_2*Clb2)*Trim-((kd_clb_1+kd_clb_2*Cdh1_a+kd_clb_3*Cdc20_a)*Clb2+kswe*Clb2+kass*Sic1*Clb2);
  enddef;

  def comp PClb2 as
    var PClb2: dimensionless {init: 0, pub: out};
    var kd_clb_1: first_order_rate_constant {pub: in};
    var kd_clb_2: first_order_rate_constant {pub: in};
    var kd_clb_3: first_order_rate_constant {pub: in};
    var kswe: first_order_rate_constant {pub: in};
    var kmih: first_order_rate_constant {pub: in};
    var kass: first_order_rate_constant {pub: in};
    var kdiss: first_order_rate_constant {pub: in};
    var kd_sic: first_order_rate_constant {pub: in};
    var kd_sic_1: first_order_rate_constant {pub: in};
    var kd_sic_2: first_order_rate_constant {pub: in};
    var Cdh1_a: dimensionless {pub: in};
    var Cdc20_a: dimensionless {pub: in};
    var Sic1: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var PTrim: dimensionless {pub: in};
    var Cln: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(PClb2, time) = kswe*Clb2+kdiss*PTrim+(kd_sic+kd_sic_1*Cln+kd_sic_2*Clb2)*PTrim-((kd_clb_1+kd_clb_2*Cdh1_a+kd_clb_3*Cdc20_a)*PClb2+kmih*PClb2+kass*Sic1*PClb2);
  enddef;

  def comp Trim as
    var Trim: dimensionless {init: 0.084, pub: out};
    var kd_clb_1: first_order_rate_constant {pub: in};
    var kd_clb_2: first_order_rate_constant {pub: in};
    var kd_clb_3: first_order_rate_constant {pub: in};
    var kswe: first_order_rate_constant {pub: in};
    var kmih: first_order_rate_constant {pub: in};
    var kass: first_order_rate_constant {pub: in};
    var kdiss: first_order_rate_constant {pub: in};
    var kd_sic: first_order_rate_constant {pub: in};
    var kd_sic_1: first_order_rate_constant {pub: in};
    var kd_sic_2: first_order_rate_constant {pub: in};
    var Cdh1_a: dimensionless {pub: in};
    var Cdc20_a: dimensionless {pub: in};
    var Sic1: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var PTrim: dimensionless {pub: in};
    var Cln: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Trim, time) = kass*Sic1*Clb2+kmih*PTrim-(kdiss*Trim+(kd_sic+kd_sic_1*Cln+kd_sic_2*Clb2)*Trim+(kd_clb_1+kd_clb_2*Cdh1_a+kd_clb_3*Cdc20_a)*Trim+kswe*Trim);
  enddef;

  def comp PTrim as
    var PTrim: dimensionless {init: 0, pub: out};
    var kd_clb_1: first_order_rate_constant {pub: in};
    var kd_clb_2: first_order_rate_constant {pub: in};
    var kd_clb_3: first_order_rate_constant {pub: in};
    var kswe: first_order_rate_constant {pub: in};
    var kmih: first_order_rate_constant {pub: in};
    var kass: first_order_rate_constant {pub: in};
    var kdiss: first_order_rate_constant {pub: in};
    var kd_sic: first_order_rate_constant {pub: in};
    var kd_sic_1: first_order_rate_constant {pub: in};
    var kd_sic_2: first_order_rate_constant {pub: in};
    var Cdh1_a: dimensionless {pub: in};
    var Cdc20_a: dimensionless {pub: in};
    var Sic1: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var PClb2: dimensionless {pub: in};
    var Trim: dimensionless {pub: in};
    var Cln: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(PTrim, time) = kswe*Trim+kass*Sic1*PClb2-(kdiss*PTrim+(kd_sic+kd_sic_1*Cln+kd_sic_2*Clb2)*PTrim+(kd_clb_1+kd_clb_2*Cdh1_a+kd_clb_3*Cdc20_a)*PTrim+kmih*PTrim);
  enddef;

  def comp Mcm_a as
    var Mcm_a: dimensionless {init: 0.933, pub: out};
    var Ji_mcm: dimensionless {init: 0.1};
    var Ja_mcm: dimensionless {init: 0.1};
    var ki_mcm: first_order_rate_constant {init: 0.15};
    var ka_mcm: first_order_rate_constant {init: 1};
    var Mcm: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Mcm_a, time) = -ki_mcm*Mcm_a/(Ji_mcm+Mcm_a)+ka_mcm*Mcm*Clb2/(Ja_mcm+Mcm);
  enddef;

  def comp Sic1 as
    var Sic1: dimensionless {init: 0.003, pub: out};
    var ks_sic: first_order_rate_constant {init: 0.1};
    var kd_clb_1: first_order_rate_constant {pub: in};
    var kd_clb_2: first_order_rate_constant {pub: in};
    var kd_clb_3: first_order_rate_constant {pub: in};
    var kass: first_order_rate_constant {pub: in};
    var kdiss: first_order_rate_constant {pub: in};
    var kd_sic: first_order_rate_constant {pub: in};
    var kd_sic_1: first_order_rate_constant {pub: in};
    var kd_sic_2: first_order_rate_constant {pub: in};
    var Cdh1_a: dimensionless {pub: in};
    var Cdc20_a: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var PClb2: dimensionless {pub: in};
    var Trim: dimensionless {pub: in};
    var PTrim: dimensionless {pub: in};
    var Cln: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Sic1, time) = ks_sic+kdiss*(PTrim+Trim)+(kd_clb_1+kd_clb_2*Cdh1_a+kd_clb_3*Cdc20_a)*(PTrim+Trim)-((kd_sic+kd_sic_1*Cln+kd_sic_2*Clb2)*Sic1+kass*Sic1*(Clb2+PClb2));
  enddef;

  def comp Mih1_a as
    var Mih1_a: dimensionless {init: 0.808, pub: out};
    var Ji_mih: dimensionless {init: 0.1};
    var Ja_mih: dimensionless {init: 0.1};
    var Vi_mih: first_order_rate_constant {init: 0.3};
    var Va_mih: first_order_rate_constant {init: 1};
    var Mih1: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Mih1_a, time) = -Vi_mih*Mih1_a/(Ji_mih+Mih1_a)+Va_mih*Clb2*Mih1/(Ja_mih+Mih1);
  enddef;

  def comp IE_a as
    var IE_a: dimensionless {init: 0.522, pub: out};
    var Ji_ie: dimensionless {init: 0.01};
    var Ja_ie: dimensionless {init: 0.01};
    var ki_ie: first_order_rate_constant {init: 0.04};
    var ka_ie: first_order_rate_constant {init: 0.1};
    var IE: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(IE_a, time) = -ki_ie*IE_a/(Ji_ie+IE_a)+ka_ie*Clb2*IE/(Ja_ie+IE);
  enddef;

  def comp Cdc20_a as
    var Cdc20_a: dimensionless {init: 1.438, pub: out};
    var Ji_cdc20: dimensionless {pub: in};
    var Ja_cdc20: dimensionless {pub: in};
    var ki_cdc20: first_order_rate_constant {pub: in};
    var kd_cdc20: first_order_rate_constant {pub: in};
    var ka_cdc20: first_order_rate_constant {pub: in};
    var Cdc20: dimensionless {pub: in};
    var IE_a: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Cdc20_a, time) = ka_cdc20*IE_a*Cdc20/(Ja_cdc20+Cdc20)-(ki_cdc20*Cdc20_a/(Ji_cdc20+Cdc20_a)+kd_cdc20*Cdc20_a);
  enddef;

  def comp Cdc20 as
    var Cdc20: dimensionless {init: 1.172, pub: out};
    var ks_cdc20_1: first_order_rate_constant {init: 0.005};
    var ks_cdc20_2: first_order_rate_constant {init: 0.3};
    var Js_cdc20: dimensionless {init: 0.3};
    var Ji_cdc20: dimensionless {pub: in};
    var Ja_cdc20: dimensionless {pub: in};
    var ki_cdc20: first_order_rate_constant {pub: in};
    var kd_cdc20: first_order_rate_constant {pub: in};
    var ka_cdc20: first_order_rate_constant {pub: in};
    var Cdc20_a: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var IE_a: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Cdc20, time) = ks_cdc20_1+ks_cdc20_2*pow(Clb2, 4{dimensionless})/(pow(Js_cdc20, 4{dimensionless})+pow(Clb2, 4{dimensionless}))+ki_cdc20*Cdc20_a/(Ji_cdc20+Cdc20_a)-(ka_cdc20*IE_a*Cdc20/(Ja_cdc20+Cdc20)+kd_cdc20*Cdc20);
  enddef;

  def comp Cdh1_a as
    var Cdh1_a: dimensionless {init: 0.993, pub: out};
    var Ji_cdh: dimensionless {init: 0.01};
    var Ja_cdh: dimensionless {init: 0.01};
    var ki_cdh: first_order_rate_constant {init: 35};
    var ka_cdh_1: first_order_rate_constant {init: 1};
    var ki_cdh_1: first_order_rate_constant {init: 2};
    var ka_cdh_2: first_order_rate_constant {init: 10};
    var Cln: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var Cdh1: dimensionless {pub: in};
    var Cdc20_a: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Cdh1_a, time) = -(ki_cdh*Clb2+ki_cdh_1*Cln)*Cdh1_a/(Ji_cdh+Cdh1_a)+(ka_cdh_1+ka_cdh_2*Cdc20_a)*Cdh1/(Ja_cdh+Cdh1);
  enddef;

  def comp Cln as
    var Cln: dimensionless {init: 0.054, pub: out};
    var ks_cln: first_order_rate_constant {init: 0.1};
    var kd_cln: first_order_rate_constant {init: 0.1};
    var SBF_a: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Cln, time) = ks_cln*SBF_a-kd_cln*Cln;
  enddef;

  def comp SBF_a as
    var SBF_a: dimensionless {init: 0.124, pub: out};
    var Ji_sbf: dimensionless {init: 0.01};
    var Ja_sbf: dimensionless {init: 0.01};
    var ki_sbf_1: first_order_rate_constant {init: 1};
    var ka_sbf_1: first_order_rate_constant {init: 1};
    var ki_sbf_2: first_order_rate_constant {init: 2};
    var ka_sbf_2: first_order_rate_constant {init: 0};
    var Cln: dimensionless {pub: in};
    var M: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var SBF: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(SBF_a, time) = -(ki_sbf_1+ki_sbf_2*Clb2)*SBF_a/(Ji_sbf+SBF_a)+(ka_sbf_1*M+ka_sbf_2*Cln)*SBF/(Ja_sbf+SBF);
  enddef;

  def comp Swe1 as
    var Swe1: dimensionless {init: 0, pub: out};
    var ks_swe: first_order_rate_constant {init: 0.0025};
    var ks_sweC: first_order_rate_constant {init: 0};
    var khsl1: first_order_rate_constant {pub: in};
    var khsl1r: first_order_rate_constant {pub: in};
    var kd_swe_1: first_order_rate_constant {pub: in};
    var Ji_wee: dimensionless {pub: in};
    var Ja_wee: dimensionless {pub: in};
    var Vi_wee: first_order_rate_constant {pub: in};
    var Va_wee: first_order_rate_constant {pub: in};
    var SBF_a: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var BUD: dimensionless {pub: in};
    var PSwe1: dimensionless {pub: in};
    var Swe1M: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Swe1, time) = ks_swe*SBF_a+ks_sweC+khsl1r*Swe1M+Va_wee*PSwe1/(Ja_wee+PSwe1)-(khsl1*BUD*Swe1+Vi_wee*Clb2*Swe1/(Ji_wee+Swe1)+kd_swe_1*Swe1);
  enddef;

  def comp PSwe1 as
    var PSwe1: dimensionless {init: 0, pub: out};
    var khsl1: first_order_rate_constant {pub: in};
    var khsl1r: first_order_rate_constant {pub: in};
    var kd_swe_1: first_order_rate_constant {pub: in};
    var Ja_wee: dimensionless {pub: in};
    var Va_wee: first_order_rate_constant {pub: in};
    var BUD: dimensionless {pub: in};
    var PSwe1M: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var Ji_wee: dimensionless {pub: in};
    var Swe1: dimensionless {pub: in};
    var Vi_wee: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(PSwe1, time) = khsl1r*PSwe1M+Vi_wee*Swe1*Clb2/(Ji_wee+Swe1)-(khsl1*BUD*PSwe1+Va_wee*PSwe1/(Ja_wee+PSwe1)+kd_swe_1*PSwe1);
  enddef;

  def comp Swe1M as
    var Swe1M: dimensionless {init: 0.018, pub: out};
    var khsl1: first_order_rate_constant {pub: in};
    var khsl1r: first_order_rate_constant {pub: in};
    var kd_swe_1: first_order_rate_constant {pub: in};
    var Ji_wee: dimensionless {pub: in};
    var Ja_wee: dimensionless {pub: in};
    var Vi_wee: first_order_rate_constant {pub: in};
    var Va_wee: first_order_rate_constant {pub: in};
    var Swe1: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var BUD: dimensionless {pub: in};
    var PSwe1M: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Swe1M, time) = khsl1*BUD*Swe1+Va_wee*PSwe1M/(Ja_wee+PSwe1M)-(khsl1r*Swe1M+Vi_wee*Clb2*Swe1M/(Ji_wee+Swe1M)+kd_swe_1*Swe1M);
  enddef;

  def comp PSwe1M as
    var PSwe1M: dimensionless {init: 0.013, pub: out};
    var kd_swe_2: first_order_rate_constant {init: 0.05};
    var kd_swe_1: first_order_rate_constant {pub: in};
    var khsl1: first_order_rate_constant {pub: in};
    var khsl1r: first_order_rate_constant {pub: in};
    var Ji_wee: dimensionless {pub: in};
    var Ja_wee: dimensionless {pub: in};
    var Vi_wee: first_order_rate_constant {pub: in};
    var Va_wee: first_order_rate_constant {pub: in};
    var Swe1M: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    var BUD: dimensionless {pub: in};
    var PSwe1: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(PSwe1M, time) = khsl1*BUD*PSwe1+Vi_wee*Clb2*Swe1M/(Ji_wee+Swe1M)-(khsl1r*PSwe1M+Va_wee*PSwe1M/(Ja_wee+PSwe1M)+kd_swe_2*PSwe1M);
  enddef;

  def comp BE as
    var BE: dimensionless {init: 0, pub: out};
    var ks_bud: first_order_rate_constant {init: 0.1};
    var kd_bud: first_order_rate_constant {init: 0.1};
    var Cln: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(BE, time) = ks_bud*Cln-kd_bud*BE;
  enddef;

  def comp M as
    var M: dimensionless {init: 0.802, pub: out};
    var mu: first_order_rate_constant {init: 0.005};
    var time: minute {pub: in};
    ode(M, time) = mu*M;
  enddef;

  def comp IE as
    var IE: dimensionless {pub: out};
    var IE_total: dimensionless {init: 1};
    var IE_a: dimensionless {pub: in};
    IE = IE_total-IE_a;
  enddef;

  def comp Cdh1 as
    var Cdh1: dimensionless {pub: out};
    var Cdh1_total: dimensionless {init: 1};
    var Cdh1_a: dimensionless {pub: in};
    Cdh1 = Cdh1_total-Cdh1_a;
  enddef;

  def comp Mih1 as
    var Mih1: dimensionless {pub: out};
    var Mih1_total: dimensionless {init: 1};
    var Mih1_a: dimensionless {pub: in};
    Mih1 = Mih1_total-Mih1_a;
  enddef;

  def comp Mcm as
    var Mcm: dimensionless {pub: out};
    var Mcm_total: dimensionless {init: 1};
    var Mcm_a: dimensionless {pub: in};
    Mcm = Mcm_total-Mcm_a;
  enddef;

  def comp SBF as
    var SBF: dimensionless {pub: out};
    var SBF_total: dimensionless {init: 1};
    var SBF_a: dimensionless {pub: in};
    SBF = SBF_total-SBF_a;
  enddef;

  def comp Swe1_total as
    var Swe1_total: dimensionless {pub: out};
    var Swe1: dimensionless {pub: in};
    var PSwe1: dimensionless {pub: in};
    var Swe1M: dimensionless {pub: in};
    var PSwe1M: dimensionless {pub: in};
    Swe1_total = Swe1+PSwe1+Swe1M+PSwe1M;
  enddef;

  def comp BUD as
    var BUD: dimensionless {pub: out};
    var BE: dimensionless {pub: in};
    var Clb2: dimensionless {pub: in};
    BUD = sel
      case (BE <= 0.6{dimensionless}) and (Clb2 < 0.2{dimensionless}):
        0{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
  enddef;

  def comp kinetic_parameters as
    var Ji_cdc20: dimensionless {init: 0.001, pub: out};
    var Ja_cdc20: dimensionless {init: 0.001, pub: out};
    var ki_cdc20: first_order_rate_constant {init: 0.25, pub: out};
    var kd_cdc20: first_order_rate_constant {init: 0.1, pub: out};
    var ka_cdc20: first_order_rate_constant {init: 1, pub: out};
    var khsl1: first_order_rate_constant {init: 1, pub: out};
    var khsl1r: first_order_rate_constant {init: 0.01, pub: out};
    var kd_swe_1: first_order_rate_constant {init: 0.007, pub: out};
    var Ji_wee: dimensionless {init: 0.05, pub: out};
    var Ja_wee: dimensionless {init: 0.05, pub: out};
    var Vi_wee: first_order_rate_constant {init: 1, pub: out};
    var Va_wee: first_order_rate_constant {init: 0.3, pub: out};
    var kd_clb_1: first_order_rate_constant {init: 0.015, pub: out};
    var kd_clb_2: first_order_rate_constant {init: 1, pub: out};
    var kd_clb_3: first_order_rate_constant {init: 0.1, pub: out};
    var kswe: first_order_rate_constant {pub: out};
    var kmih: first_order_rate_constant {pub: out};
    var kass: first_order_rate_constant {init: 300, pub: out};
    var kdiss: first_order_rate_constant {init: 0.1, pub: out};
    var kd_sic: first_order_rate_constant {init: 0.01, pub: out};
    var kd_sic_1: first_order_rate_constant {init: 1, pub: out};
    var kd_sic_2: first_order_rate_constant {init: 3, pub: out};
    var kswe_1: first_order_rate_constant {init: 2};
    var kswe_2: first_order_rate_constant {init: 0.01};
    var kswe_3: first_order_rate_constant {init: 0.2};
    var kmih_1: first_order_rate_constant {init: 5};
    var kmih_2: first_order_rate_constant {init: 0.5};
    var Mih1_a: dimensionless {pub: in};
    var Mih1: dimensionless {pub: in};
    var Swe1: dimensionless {pub: in};
    var Swe1M: dimensionless {pub: in};
    var PSwe1: dimensionless {pub: in};
    var PSwe1M: dimensionless {pub: in};
    kmih = kmih_1*Mih1_a+kmih_2*Mih1;
    kswe = kswe_1*Swe1+kswe_2*Swe1M+kswe_3*PSwe1;
  enddef;
  def map between Clb2 and environment for
    vars time and time;
  enddef;
  def map between PClb2 and environment for
    vars time and time;
  enddef;
  def map between Trim and environment for
    vars time and time;
  enddef;
  def map between PTrim and environment for
    vars time and time;
  enddef;
  def map between Mcm_a and environment for
    vars time and time;
  enddef;
  def map between Sic1 and environment for
    vars time and time;
  enddef;
  def map between Mih1_a and environment for
    vars time and time;
  enddef;
  def map between IE_a and environment for
    vars time and time;
  enddef;
  def map between Cdc20_a and environment for
    vars time and time;
  enddef;
  def map between Cdc20 and environment for
    vars time and time;
  enddef;
  def map between Cdh1_a and environment for
    vars time and time;
  enddef;
  def map between Cln and environment for
    vars time and time;
  enddef;
  def map between SBF_a and environment for
    vars time and time;
  enddef;
  def map between Swe1 and environment for
    vars time and time;
  enddef;
  def map between PSwe1 and environment for
    vars time and time;
  enddef;
  def map between Swe1M and environment for
    vars time and time;
  enddef;
  def map between PSwe1M and environment for
    vars time and time;
  enddef;
  def map between BE and environment for
    vars time and time;
  enddef;
  def map between M and environment for
    vars time and time;
  enddef;
  def map between Clb2 and M for
    vars M and M;
  enddef;
  def map between Clb2 and Cdh1_a for
    vars Cdh1_a and Cdh1_a;
    vars Clb2 and Clb2;
  enddef;
  def map between Clb2 and Cdc20_a for
    vars Cdc20_a and Cdc20_a;
  enddef;
  def map between Clb2 and Mcm_a for
    vars Mcm_a and Mcm_a;
    vars Clb2 and Clb2;
  enddef;
  def map between Clb2 and PClb2 for
    vars PClb2 and PClb2;
    vars Clb2 and Clb2;
  enddef;
  def map between Clb2 and Sic1 for
    vars Sic1 and Sic1;
    vars Clb2 and Clb2;
  enddef;
  def map between Clb2 and Trim for
    vars Trim and Trim;
    vars Clb2 and Clb2;
  enddef;
  def map between Clb2 and Cln for
    vars Cln and Cln;
  enddef;
  def map between PClb2 and Cdh1_a for
    vars Cdh1_a and Cdh1_a;
  enddef;
  def map between PClb2 and Cdc20_a for
    vars Cdc20_a and Cdc20_a;
  enddef;
  def map between PClb2 and Sic1 for
    vars Sic1 and Sic1;
    vars PClb2 and PClb2;
  enddef;
  def map between PClb2 and PTrim for
    vars PTrim and PTrim;
    vars PClb2 and PClb2;
  enddef;
  def map between PClb2 and Cln for
    vars Cln and Cln;
  enddef;
  def map between Trim and Sic1 for
    vars Sic1 and Sic1;
    vars Trim and Trim;
  enddef;
  def map between Trim and Cln for
    vars Cln and Cln;
  enddef;
  def map between Trim and Cdh1_a for
    vars Cdh1_a and Cdh1_a;
  enddef;
  def map between Trim and Cdc20_a for
    vars Cdc20_a and Cdc20_a;
  enddef;
  def map between Trim and PTrim for
    vars PTrim and PTrim;
    vars Trim and Trim;
  enddef;
  def map between PTrim and Sic1 for
    vars Sic1 and Sic1;
    vars PTrim and PTrim;
  enddef;
  def map between PTrim and Cln for
    vars Cln and Cln;
  enddef;
  def map between PTrim and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between PTrim and Cdh1_a for
    vars Cdh1_a and Cdh1_a;
  enddef;
  def map between PTrim and Cdc20_a for
    vars Cdc20_a and Cdc20_a;
  enddef;
  def map between Mcm_a and Mcm for
    vars Mcm and Mcm;
    vars Mcm_a and Mcm_a;
  enddef;
  def map between Sic1 and Cln for
    vars Cln and Cln;
  enddef;
  def map between Sic1 and Cdh1_a for
    vars Cdh1_a and Cdh1_a;
  enddef;
  def map between Sic1 and Cdc20_a for
    vars Cdc20_a and Cdc20_a;
  enddef;
  def map between Mih1_a and Mih1 for
    vars Mih1 and Mih1;
    vars Mih1_a and Mih1_a;
  enddef;
  def map between Mih1_a and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between IE_a and IE for
    vars IE and IE;
    vars IE_a and IE_a;
  enddef;
  def map between IE_a and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between Cdc20_a and IE_a for
    vars IE_a and IE_a;
  enddef;
  def map between Cdc20_a and Cdc20 for
    vars Cdc20 and Cdc20;
    vars Cdc20_a and Cdc20_a;
  enddef;
  def map between Cdc20 and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between Cdc20 and IE_a for
    vars IE_a and IE_a;
  enddef;
  def map between Cdh1_a and Cln for
    vars Cln and Cln;
  enddef;
  def map between Cdh1_a and Cdc20_a for
    vars Cdc20_a and Cdc20_a;
  enddef;
  def map between Cdh1_a and Cdh1 for
    vars Cdh1 and Cdh1;
    vars Cdh1_a and Cdh1_a;
  enddef;
  def map between Cln and SBF_a for
    vars SBF_a and SBF_a;
    vars Cln and Cln;
  enddef;
  def map between SBF_a and SBF for
    vars SBF and SBF;
    vars SBF_a and SBF_a;
  enddef;
  def map between SBF_a and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between SBF_a and M for
    vars M and M;
  enddef;
  def map between Swe1 and SBF_a for
    vars SBF_a and SBF_a;
  enddef;
  def map between Swe1 and BUD for
    vars BUD and BUD;
  enddef;
  def map between Swe1 and Swe1M for
    vars Swe1M and Swe1M;
    vars Swe1 and Swe1;
  enddef;
  def map between Swe1 and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between Swe1 and PSwe1 for
    vars PSwe1 and PSwe1;
    vars Swe1 and Swe1;
  enddef;
  def map between PSwe1 and BUD for
    vars BUD and BUD;
  enddef;
  def map between PSwe1 and PSwe1M for
    vars PSwe1M and PSwe1M;
    vars PSwe1 and PSwe1;
  enddef;
  def map between PSwe1 and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between Swe1M and BUD for
    vars BUD and BUD;
  enddef;
  def map between Swe1M and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between Swe1M and PSwe1M for
    vars PSwe1M and PSwe1M;
    vars Swe1M and Swe1M;
  enddef;
  def map between PSwe1M and BUD for
    vars BUD and BUD;
  enddef;
  def map between PSwe1M and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between BE and Cln for
    vars Cln and Cln;
  enddef;
  def map between Swe1_total and Swe1 for
    vars Swe1 and Swe1;
  enddef;
  def map between Swe1_total and PSwe1 for
    vars PSwe1 and PSwe1;
  enddef;
  def map between Swe1_total and Swe1M for
    vars Swe1M and Swe1M;
  enddef;
  def map between Swe1_total and PSwe1M for
    vars PSwe1M and PSwe1M;
  enddef;
  def map between BUD and BE for
    vars BE and BE;
  enddef;
  def map between BUD and Clb2 for
    vars Clb2 and Clb2;
  enddef;
  def map between Clb2 and kinetic_parameters for
    vars kd_clb_1 and kd_clb_1;
    vars kd_clb_2 and kd_clb_2;
    vars kd_clb_3 and kd_clb_3;
    vars kswe and kswe;
    vars kmih and kmih;
    vars kass and kass;
    vars kdiss and kdiss;
    vars kd_sic and kd_sic;
    vars kd_sic_1 and kd_sic_1;
    vars kd_sic_2 and kd_sic_2;
  enddef;
  def map between PClb2 and kinetic_parameters for
    vars kd_clb_1 and kd_clb_1;
    vars kd_clb_2 and kd_clb_2;
    vars kd_clb_3 and kd_clb_3;
    vars kswe and kswe;
    vars kmih and kmih;
    vars kass and kass;
    vars kdiss and kdiss;
    vars kd_sic and kd_sic;
    vars kd_sic_1 and kd_sic_1;
    vars kd_sic_2 and kd_sic_2;
  enddef;
  def map between Trim and kinetic_parameters for
    vars kd_clb_1 and kd_clb_1;
    vars kd_clb_2 and kd_clb_2;
    vars kd_clb_3 and kd_clb_3;
    vars kswe and kswe;
    vars kmih and kmih;
    vars kass and kass;
    vars kdiss and kdiss;
    vars kd_sic and kd_sic;
    vars kd_sic_1 and kd_sic_1;
    vars kd_sic_2 and kd_sic_2;
  enddef;
  def map between PTrim and kinetic_parameters for
    vars kd_clb_1 and kd_clb_1;
    vars kd_clb_2 and kd_clb_2;
    vars kd_clb_3 and kd_clb_3;
    vars kswe and kswe;
    vars kmih and kmih;
    vars kass and kass;
    vars kdiss and kdiss;
    vars kd_sic and kd_sic;
    vars kd_sic_1 and kd_sic_1;
    vars kd_sic_2 and kd_sic_2;
  enddef;
  def map between Sic1 and kinetic_parameters for
    vars kd_clb_1 and kd_clb_1;
    vars kd_clb_2 and kd_clb_2;
    vars kd_clb_3 and kd_clb_3;
    vars kass and kass;
    vars kdiss and kdiss;
    vars kd_sic and kd_sic;
    vars kd_sic_1 and kd_sic_1;
    vars kd_sic_2 and kd_sic_2;
  enddef;
  def map between Cdc20_a and kinetic_parameters for
    vars ka_cdc20 and ka_cdc20;
    vars ki_cdc20 and ki_cdc20;
    vars Ja_cdc20 and Ja_cdc20;
    vars Ji_cdc20 and Ji_cdc20;
    vars kd_cdc20 and kd_cdc20;
  enddef;
  def map between Cdc20 and kinetic_parameters for
    vars ka_cdc20 and ka_cdc20;
    vars ki_cdc20 and ki_cdc20;
    vars Ja_cdc20 and Ja_cdc20;
    vars Ji_cdc20 and Ji_cdc20;
    vars kd_cdc20 and kd_cdc20;
  enddef;
  def map between Swe1 and kinetic_parameters for
    vars khsl1 and khsl1;
    vars khsl1r and khsl1r;
    vars Vi_wee and Vi_wee;
    vars Va_wee and Va_wee;
    vars Ji_wee and Ji_wee;
    vars Ja_wee and Ja_wee;
    vars kd_swe_1 and kd_swe_1;
    vars Swe1 and Swe1;
  enddef;
  def map between PSwe1 and kinetic_parameters for
    vars khsl1 and khsl1;
    vars khsl1r and khsl1r;
    vars Va_wee and Va_wee;
    vars Ja_wee and Ja_wee;
    vars Ji_wee and Ji_wee;
    vars Vi_wee and Vi_wee;
    vars kd_swe_1 and kd_swe_1;
    vars PSwe1 and PSwe1;
  enddef;
  def map between Swe1M and kinetic_parameters for
    vars khsl1 and khsl1;
    vars khsl1r and khsl1r;
    vars Vi_wee and Vi_wee;
    vars Va_wee and Va_wee;
    vars Ji_wee and Ji_wee;
    vars Ja_wee and Ja_wee;
    vars kd_swe_1 and kd_swe_1;
    vars Swe1M and Swe1M;
  enddef;
  def map between PSwe1M and kinetic_parameters for
    vars khsl1 and khsl1;
    vars khsl1r and khsl1r;
    vars Vi_wee and Vi_wee;
    vars Va_wee and Va_wee;
    vars Ji_wee and Ji_wee;
    vars Ja_wee and Ja_wee;
    vars kd_swe_1 and kd_swe_1;
    vars PSwe1M and PSwe1M;
  enddef;
  def map between Mih1 and kinetic_parameters for
    vars Mih1 and Mih1;
  enddef;
  def map between Mih1_a and kinetic_parameters for
    vars Mih1_a and Mih1_a;
  enddef;
enddef;
