<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="halloy_2002" name="halloy_2010">

	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>The Follicular Automaton Model for Hair Cycles</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>This CellMl model runs in OpenCell and COR to recreate the same steady state output of the original published model (as seen in in figure 5(d)). The units have been checked and they are consistent.  The CellMl model represents the deterministic version of the follicular automaton model. Currently CellML cannot be used to describe stochastic variables.  
          </para>
  </section>
  
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: Human scalp hair consists of a set of about 10 to the 5 follicles which progress independently through developmental cycles. Each hair follicle successively goes through the anagen (A), catagen (C), telogen (T) and latency (L) phases that correspond, respectively, to growth, arrest and hair shedding before a new anagen phase is initiated. Long-term experimental observations in a group of ten male, alopecic and non-alopecic volunteers allowed determination of the characteristics of hair follicle cycles. On the basis of these observations, we previously proposed a follicular automaton model to simulate the dynamics of human hair cycles and the development of different patterns of alopecia [Halloy et al. (2000) Proc. Natl Acad. Sci. U.S.A.97, 8328-8333]. The automaton model is defined by a set of rules that govern the stochastic transitions of each follicle between the successive states A, T, L and the subsequent return to A. These transitions occur independently for each follicle, after time intervals given stochastically by a distribution characterized by a mean and a standard deviation. The follicular automaton model was shown to account both for the dynamical transitions observed in a single follicle, and for the behaviour of an ensemble of independently cycling follicles. Here, we extend these results and investigate additional properties of the model. We present a deterministic version of the follicular automaton. We show that numerical simulations of the stochastic version of the automaton yield steady-state level of follicles in the different phases which approach the levels predicted by the deterministic equations as the number of follicles progressively increases. Only the stochastic version can successfully reproduce the fluctuations of the fractions of follicles in each of the three phases, observed in small follicle populations. When the standard deviation is reduced or when the follicles become otherwise synchronized, e.g. by a periodic external signal inducing the transition of anagen follicles into telogen phase, large-amplitude oscillations occur in the fractions of follicles in the three phases. These oscillations are not observed in humans but are reminiscent of the phenomenon of moulting observed in a number of mammalian species. Copyright 2002 Elsevier Science Ltd.
</para>
				
				<para>
The original paper reference is cited below:
</para>
				<para>The Follicular Automaton Model: Effect of Stochasticity and of Synchronization of Hair Cycles, J. Halloy, B.A. Bernard, G. Loussouarn and A. Goldbeter, 2002, <emphasis>Journal of Theoretical Biology</emphasis>
					, 214, 469-479. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=11846603&amp;dopt=Abstract">PubMed ID: 11846603</ulink>
				</para>
				
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>reaction_diagram</title>
							</objectinfo>
							<imagedata fileref="halloy_2002.png"/>
						</imageobject>
					</mediaobject>
					<caption>The above diagram represents the transition of a model hair follicle from anagen (A) to telogen (T) to latency (L) phase, successively.  After phase T, the follicle may either die or miniaturise (transition to M; this usually occurs after a critical number of cycles), or complete a cycle by entering a new A phase.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
		<rdf:Seq rdf:about="rdf:#938ccf5e-4885-4f05-ab56-14e7f89831f5">
			<rdf:li rdf:resource="rdf:#7eb6c7a1-8273-4740-90c3-62f143c7c4fa"/>
			<rdf:li rdf:resource="rdf:#0d2c60d9-f3dc-4bd7-b681-b2d5219b9805"/>
			<rdf:li rdf:resource="rdf:#e35a22a5-5133-4a93-a058-fbf354e32668"/>
			<rdf:li rdf:resource="rdf:#7850f474-4d8d-462c-b0cc-defd3e743a46"/>
		</rdf:Seq>
		<rdf:Description rdf:about="">
			<dc:publisher xmlns:dc="http://purl.org/dc/elements/1.1/">The University of Auckland, Auckland Bioengineering Institute</dc:publisher>
			<cmeta:comment rdf:resource="rdf:#f543d383-3818-47f9-a478-4093e9cf8719"/>
			<dcterms:created xmlns:dcterms="http://purl.org/dc/terms/" rdf:resource="rdf:#38953006-754f-4a44-8913-c2c2f9e9ff49"/>
			<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#e5bc5515-6269-47fb-a381-81b635a8db08"/>
			<cmeta:modification rdf:resource="rdf:#58ff0e07-4e57-48cb-bc63-d77a7b3bd761"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#7c84a4a5-5f34-4e49-95d6-1aed9d4e5301">
			<bqs:subject_type xmlns:bqs="http://www.cellml.org/bqs/1.0#">keyword</bqs:subject_type>
			<rdf:value>
				<rdf:Bag>
					<rdf:li>cell cycle</rdf:li>
					<rdf:li>hair</rdf:li>
				</rdf:Bag>
			</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#b71bc0a1-a6a7-4ec5-86f2-69d889ec47aa">
			<vCard:FN xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#46523884-c7c2-4f05-8c6a-84a5b898b1f2">
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Journal of Theoretical Biology</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#e5bc5515-6269-47fb-a381-81b635a8db08">
			<vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#6c4edf7b-89c9-4adc-b3de-8a0ef32f4ad3"/>
			<vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#fff43193-72c9-420f-841c-fee8e0ced587"/>
			<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#c0b4f1d6-2b97-4689-8fba-2c572af4c01b"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#f543d383-3818-47f9-a478-4093e9cf8719">
			<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#f278a2f3-0096-4886-83a1-b0ca1103b9a9"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#2bd11713-94bd-4bf0-89e3-715a211cdfba">
			<vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">G</vCard:Given>
			<vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Loussouarn</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#2383077c-3aec-42ca-988b-5d30d825b85e">
			<bqs:Pubmed_id xmlns:bqs="http://www.cellml.org/bqs/1.0#">11846603</bqs:Pubmed_id>
			<bqs:JournalArticle xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#12b0d5ae-a089-47fd-8b01-8482e183f7b7"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#0d2c60d9-f3dc-4bd7-b681-b2d5219b9805">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#a34ff844-9e90-49a1-b3e4-6e551ff7e186"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#0c1ba2b9-a3eb-4186-aa44-d985364b939f">
			<vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">J</vCard:Given>
			<vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Halloy</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#fd782a3f-7398-40b2-b02c-60766376239a">
			<vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">A</vCard:Given>
			<vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Goldbeter</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#a34ff844-9e90-49a1-b3e4-6e551ff7e186">
			<vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">B</vCard:Given>
			<vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Bernard</vCard:Family>
			<vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">A</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#36aa2470-ce60-4e6c-93df-bc08173af782">
			<dc:subject xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#7c84a4a5-5f34-4e49-95d6-1aed9d4e5301"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#12b0d5ae-a089-47fd-8b01-8482e183f7b7">
			<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#938ccf5e-4885-4f05-ab56-14e7f89831f5"/>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">The Follicular Automaton Model: Effect of Stochasticity and of
            Synchronization of Hair Cycles</dc:title>
			<bqs:volume xmlns:bqs="http://www.cellml.org/bqs/1.0#">214</bqs:volume>
			<bqs:first_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">469</bqs:first_page>
			<bqs:Journal xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#46523884-c7c2-4f05-8c6a-84a5b898b1f2"/>
			<dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:resource="rdf:#1cbf0d1d-062d-496b-bd55-fa9f676bdc03"/>
			<bqs:last_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">479</bqs:last_page>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#c0b4f1d6-2b97-4689-8fba-2c572af4c01b">
			<vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Catherine</vCard:Given>
			<vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Lloyd</vCard:Family>
			<vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">May</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#42d180f8-165a-49e4-9c55-bf63c1d523f9">
			<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#b71bc0a1-a6a7-4ec5-86f2-69d889ec47aa"/>
			<rdf:value>This is the CellML description of Halloy et al's 2002 follicular automaton model.</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#7850f474-4d8d-462c-b0cc-defd3e743a46">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#fd782a3f-7398-40b2-b02c-60766376239a"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#38953006-754f-4a44-8913-c2c2f9e9ff49">
			<dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2007-05-29T00:00:00+00:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#7eb6c7a1-8273-4740-90c3-62f143c7c4fa">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#0c1ba2b9-a3eb-4186-aa44-d985364b939f"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#edbcddad-4f76-4a01-a22b-4e743ca342fa">
			<vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Catherine</vCard:Given>
			<vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Lloyd</vCard:Family>
			<vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">May</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#8ce3c239-a298-4966-8ef4-3ece4a14e7b9">
			<dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2007-06-05T09:33:08+12:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#fff43193-72c9-420f-841c-fee8e0ced587">
			<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
			<rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#03e4804d-b4e1-4344-9669-5f7f299a97f2">
			<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#edbcddad-4f76-4a01-a22b-4e743ca342fa"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#1cbf0d1d-062d-496b-bd55-fa9f676bdc03">
			<dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2002-02-07</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#58ff0e07-4e57-48cb-bc63-d77a7b3bd761">
			<dcterms:modified xmlns:dcterms="http://purl.org/dc/terms/" rdf:resource="rdf:#8ce3c239-a298-4966-8ef4-3ece4a14e7b9"/>
			<rdf:value>The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics.  This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology.

The model runs in the PCEnv simulator but gives a flat output.</rdf:value>
			<cmeta:modifier rdf:resource="rdf:#03e4804d-b4e1-4344-9669-5f7f299a97f2"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#e35a22a5-5133-4a93-a058-fbf354e32668">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#2bd11713-94bd-4bf0-89e3-715a211cdfba"/>
		</rdf:Description>
		<rdf:Description rdf:about="#halloy_2002">
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">
      Halloy et al's 2002 follicular automaton model.
      </dc:title>
			<cmeta:comment rdf:resource="rdf:#42d180f8-165a-49e4-9c55-bf63c1d523f9"/>
			<bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#2383077c-3aec-42ca-988b-5d30d825b85e"/>
			<bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#36aa2470-ce60-4e6c-93df-bc08173af782"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#6c4edf7b-89c9-4adc-b3de-8a0ef32f4ad3">
			<vCard:Orgname xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">The University of Auckland</vCard:Orgname>
			<vCard:Orgunit xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Auckland Bioengineering Institute</vCard:Orgunit>
		</rdf:Description>
	</rdf:RDF>   
	
   <units base_units="yes" name="fraction"/>
   <units name="month">
      <unit multiplier="2592000" units="second"/>
   </units>
   <units name="flux">
      <unit units="fraction"/>
      <unit exponent="-1" units="month"/>
   </units>
   <units name="first_order_rate_constant">
      <unit exponent="-1" units="month"/>
   </units>
   
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="month"/>
   </component>
   
   <component cmeta:id="L" name="L">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#L">
        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">L</dc:title>
        <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">latency phase</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
      <variable cmeta:id="L_L" initial_value="0.33" name="L" public_interface="out" units="fraction"/>
      <variable name="mu_T" public_interface="in" units="month"/>
      <variable name="mu_L" public_interface="in" units="month"/>
      <variable name="mu_A" public_interface="in" units="month"/>
      <variable name="epsilon" public_interface="in" units="first_order_rate_constant"/>
      <variable name="M" public_interface="in" units="fraction"/>
      <variable name="T" public_interface="in" units="fraction"/>
      <variable name="time" public_interface="in" units="month"/>
      <variable name="L_0" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>L_0</ci>
            <apply>
               <divide/>
               <ci>mu_L</ci>
               <apply>
                  <plus/>
                  <ci>mu_A</ci>
                  <ci>mu_T</ci>
                  <ci>mu_L</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>L</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <times/>
                     <apply>
                        <divide/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                        <ci>mu_T</ci>
                     </apply>
                     <ci>T</ci>
                  </apply>
                  <apply>
                     <times/>
                     <apply>
                        <divide/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                        <ci>mu_L</ci>
                     </apply>
                     <ci>L</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>epsilon</ci>
                  <ci>M</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component cmeta:id="A" name="A">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#A">
        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">A</dc:title>
        <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">anagen phase</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
      <variable cmeta:id="A_A" initial_value="0.34" name="A" public_interface="out" units="fraction"/>
      <variable name="mu_A" public_interface="in" units="month"/>
      <variable name="mu_L" public_interface="in" units="month"/>
      <variable name="mu_T" public_interface="in" units="month"/>
      <variable name="L" public_interface="in" units="fraction"/>
      <variable name="time" public_interface="in" units="month"/>
      <variable name="A_0" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>A_0</ci>
            <apply>
               <divide/>
               <ci>mu_A</ci>
               <apply>
                  <plus/>
                  <ci>mu_A</ci>
                  <ci>mu_T</ci>
                  <ci>mu_L</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>A</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <apply>
                     <divide/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <ci>mu_L</ci>
                  </apply>
                  <ci>L</ci>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <divide/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <ci>mu_A</ci>
                  </apply>
                  <ci>A</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component cmeta:id="T" name="T">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#T">
        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">T</dc:title>
        <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">telogen phase</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
      <variable cmeta:id="T_T" initial_value="0.33" name="T" public_interface="out" units="fraction"/>
      <variable name="mu_A" public_interface="in" units="month"/>
      <variable name="mu_T" public_interface="in" units="month"/>
      <variable name="mu_L" public_interface="in" units="month"/>
      <variable name="A" public_interface="in" units="fraction"/>
      <variable name="time" public_interface="in" units="month"/>
      <variable name="T_0" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>T_0</ci>
            <apply>
               <divide/>
               <ci>mu_T</ci>
               <apply>
                  <plus/>
                  <ci>mu_A</ci>
                  <ci>mu_T</ci>
                  <ci>mu_L</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>T</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <apply>
                     <divide/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <ci>mu_A</ci>
                  </apply>
                  <ci>A</ci>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <divide/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <ci>mu_T</ci>
                  </apply>
                  <ci>T</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component cmeta:id="M" name="M">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#M">
        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">M</dc:title>
        <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">miniaturisation phase</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
      <variable cmeta:id="M_M" initial_value="0" name="M" public_interface="out" units="fraction"/>
      <variable name="epsilon" public_interface="in" units="first_order_rate_constant"/>
      <variable name="T" public_interface="in" units="fraction"/>
      <variable name="time" public_interface="in" units="month"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>M</ci>
            </apply>
            <apply>
               <times/>
               <ci>epsilon</ci>
               <ci>T</ci>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="reaction_constants">
      <variable initial_value="2" name="mu_L" public_interface="out" units="month"/>
      <variable initial_value="3.6" name="mu_A" public_interface="out" units="month"/>
      <variable initial_value="2.4" name="mu_T" public_interface="out" units="month"/>
      <variable initial_value="0" name="epsilon" public_interface="out" units="first_order_rate_constant"/>
   </component>
   
   <connection>
      <map_components component_1="L" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="A" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="T" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="M" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="L" component_2="T"/>
      <map_variables variable_1="T" variable_2="T"/>
   </connection>
   <connection>
      <map_components component_1="L" component_2="A"/>
      <map_variables variable_1="L" variable_2="L"/>
   </connection>
   <connection>
      <map_components component_1="A" component_2="T"/>
      <map_variables variable_1="A" variable_2="A"/>
   </connection>
   <connection>
      <map_components component_1="L" component_2="M"/>
      <map_variables variable_1="M" variable_2="M"/>
   </connection>
   <connection>
      <map_components component_1="T" component_2="M"/>
      <map_variables variable_1="T" variable_2="T"/>
   </connection>
   <connection>
      <map_components component_1="A" component_2="reaction_constants"/>
      <map_variables variable_1="mu_L" variable_2="mu_L"/>
      <map_variables variable_1="mu_A" variable_2="mu_A"/>
      <map_variables variable_1="mu_T" variable_2="mu_T"/>
   </connection>
   <connection>
      <map_components component_1="T" component_2="reaction_constants"/>
      <map_variables variable_1="mu_T" variable_2="mu_T"/>
      <map_variables variable_1="mu_A" variable_2="mu_A"/>
      <map_variables variable_1="mu_L" variable_2="mu_L"/>
   </connection>
   <connection>
      <map_components component_1="L" component_2="reaction_constants"/>
      <map_variables variable_1="mu_L" variable_2="mu_L"/>
      <map_variables variable_1="mu_T" variable_2="mu_T"/>
      <map_variables variable_1="mu_A" variable_2="mu_A"/>
      <map_variables variable_1="epsilon" variable_2="epsilon"/>
   </connection>
   <connection>
      <map_components component_1="M" component_2="reaction_constants"/>
      <map_variables variable_1="epsilon" variable_2="epsilon"/>
   </connection>
</model>