// This CellML file was generated on 19/02/2009 at 9:48:35 at a.m. using:
//
// COR (0.9.31.1175)
// Copyright 2002-2009 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// comment: FN Jeelean Lim; This CellML version of the model runs in PCEnv but in order to reproduce the published results, requires initial concentrations that are not listed in the paper. The switch "mass = mass/2 when Cdh1 crosses 0.2 from below" has not been implemented in this CellML description. Units have been checked and are consistent.
// created: W3CDTF 2009-02-19T00:00:00+00:00
// creator: Orgname University of Auckland; Orgunit Auckland Bioengineering Institute; jlim063@aucklanduni.ac.nz; Given Jeelean; Family Lim
// modification: W3CDTF 2009-05-14T15:04:45+12:00; Updated curation status, removed reference link from documentation; Given James; Family Lawson; Other Richard
// reference: Pubmed_id 15363676; Given Bela; Family Novak; Given John; Family Tyson; title A model for restriction point control of the mammalian cell cycle; volume 230; first_page 563; title Journal of Theoretical Biology; W3CDTF 2004-10-21 00:00; last_page 579
// reference: subject_type keyword; cell cycle
// comment: FN Jeelean Lim; This is the CellML description of Novak and Tyson's 2004 model for restriction point control of the mammalian cell cycle.
def model novak_tyson_2004_version01 as
  // A Model for Restriction Point Control of the Mammalian Cell Cycle
  //
  // Jeelean Lim
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML version of the model runs in PCEnv but in order to reproduce the published results, requires initial concentrations that are not listed in the paper. The switch "mass = mass/2 when Cdh1 crosses 0.2 from below" has not been implemented in this CellML description.
  //
  // ValidateCellML verifies this model as valid CellML.
  //
  // Model Structure
  //
  // ABSTRACT: Inhibition of protein synthesis by cycloheximide blocks subsequent division of a mammalian cell, but only if the cell is exposed to the drug before the restriction point (i.e. within the first several hours after birth). If exposed to cycloheximide after the restriction point, a cell proceeds with DNA synthesis, mitosis and cell division and halts in the next cell cycle. If cycloheximide is later removed from the culture medium, treated cells will return to the division cycle, showing a complex pattern of division times post-treatment, as first measured by Zetterberg and colleagues.
  //
  // We simulate these physiological responses of mammalian cells to transient inhibition of growth, using a set of nonlinear differential equations based on a realistic model of the molecular events underlying progression through the cell cycle. The model relieson our earlier work on the regulation of cyclin-dependent protein kinases during the cell division cycle of yeast. The yeast model is supplemented with equations describing the effects of retinoblastoma protein on cell growth and the synthesis of cyclins A and E, and with a primitive representation of the signaling pathway that controls synthesis of cyclin D.
  //
  // The complete original paper reference is cited below:
  //
  // A model for restriction point control of the mammalian cell cycle, Bela Novak, and John J Tyson, 2004, Journal of Theoretical Biology , 230, 563-579. (A PDF version of the article is available to subscribers on the Journal of Theoretical Biology website.) PubMed ID: 15363676 (http://www.ncbi.nlm.nih.gov/pubmed/15363676?dopt=Abstract)
  //
  // figure 1
  //
  // Molecular network regulating the progression of mammalian cells through the cell cycle.
  def unit hour as
    unit second {mult: 3600};
  enddef;
  def unit first_order_rate_constant as
    unit hour {expo: -1};
  enddef;

  def comp environment as
    var time: hour {pub: out};
  enddef;

  def comp ERG as
    var ERG: dimensionless {pub: out};
    var k_15: first_order_rate_constant {pub: in};
    var k_16: first_order_rate_constant {pub: in};
    var J_15: dimensionless {pub: in};
    var epsilon: dimensionless {pub: in};
    var DRG: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(ERG, time) = epsilon*k_15/(1{dimensionless}+sqr(DRG/J_15))-k_16*ERG;
  enddef;

  def comp DRG as
    var DRG: dimensionless {pub: out};
    var k_17_: first_order_rate_constant {pub: in};
    var k_17: first_order_rate_constant {pub: in};
    var k_18: first_order_rate_constant {pub: in};
    var epsilon: dimensionless {pub: in};
    var ERG: dimensionless {pub: in};
    var J_17: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(DRG, time) = epsilon*(k_17_*ERG+sqr(DRG/J_17)*k_17/(1{dimensionless}+sqr(DRG/J_17)))-k_18*DRG;
  enddef;

  def comp Kip1 as
    var Kip1: dimensionless {pub: out};
    var k_5: first_order_rate_constant {pub: in};
    var k_24: first_order_rate_constant {pub: in};
    var k_24r: first_order_rate_constant {pub: in};
    var k_10: first_order_rate_constant {pub: in};
    var k_25: first_order_rate_constant {pub: in};
    var k_25r: first_order_rate_constant {pub: in};
    var k_30: first_order_rate_constant {pub: in};
    var V_6: first_order_rate_constant {pub: in};
    var V_8: first_order_rate_constant {pub: in};
    var epsilon: dimensionless {pub: in};
    var CycD: dimensionless {pub: in};
    var CycD_Kip1: dimensionless {pub: in};
    var CycE: dimensionless {pub: in};
    var CycA: dimensionless {pub: in};
    var CycE_Kip1: dimensionless {pub: in};
    var CycA_Kip1: dimensionless {pub: in};
    var Cdc20: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(Kip1, time) = epsilon*k_5-V_6*Kip1-k_24*CycD*Kip1+k_24r*CycD_Kip1+k_10*CycD_Kip1-k_25*Kip1*(CycE+CycA)+k_25r*(CycE_Kip1+CycA_Kip1)+V_8*CycE_Kip1+k_30*Cdc20*CycA_Kip1;
  enddef;

  def comp CycA_Kip1 as
    var CycA_Kip1: dimensionless {pub: out};
    var k_25: first_order_rate_constant {pub: in};
    var k_25r: first_order_rate_constant {pub: in};
    var k_30: first_order_rate_constant {pub: in};
    var V_6: first_order_rate_constant {pub: in};
    var CycA: dimensionless {pub: in};
    var Kip1: dimensionless {pub: in};
    var Cdc20: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(CycA_Kip1, time) = k_25*CycA*Kip1-k_25r*CycA_Kip1-V_6*CycA_Kip1-k_30*Cdc20*CycA_Kip1;
  enddef;

  def comp CycD_Kip1 as
    var CycD_Kip1: dimensionless {pub: out};
    var k_24: first_order_rate_constant {pub: in};
    var k_24r: first_order_rate_constant {pub: in};
    var k_10: first_order_rate_constant {pub: in};
    var V_6: first_order_rate_constant {pub: in};
    var CycD: dimensionless {pub: in};
    var Kip1: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(CycD_Kip1, time) = k_24*CycD*Kip1-k_24r*CycD_Kip1-V_6*CycD_Kip1-k_10*CycD_Kip1;
  enddef;

  def comp CycE_Kip1 as
    var CycE_Kip1: dimensionless {pub: out};
    var k_25: first_order_rate_constant {pub: in};
    var k_25r: first_order_rate_constant {pub: in};
    var V_6: first_order_rate_constant {pub: in};
    var V_8: first_order_rate_constant {pub: in};
    var CycE: dimensionless {pub: in};
    var Kip1: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(CycE_Kip1, time) = k_25*CycE*Kip1-k_25r*CycE_Kip1-V_6*CycE_Kip1-V_8*CycE_Kip1;
  enddef;

  def comp CycA as
    var CycA: dimensionless {pub: out};
    var k_29: first_order_rate_constant {pub: in};
    var k_30: first_order_rate_constant {pub: in};
    var k_25: first_order_rate_constant {pub: in};
    var k_25r: first_order_rate_constant {pub: in};
    var V_6: first_order_rate_constant {pub: in};
    var epsilon: dimensionless {pub: in};
    var E2FA: dimensionless {pub: in};
    var Cdc20: dimensionless {pub: in};
    var Kip1: dimensionless {pub: in};
    var mass: dimensionless {pub: in};
    var CycA_Kip1: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(CycA, time) = epsilon*k_29*E2FA*mass-k_30*Cdc20*CycA-k_25*CycA*Kip1+k_25r*CycA_Kip1+V_6*CycA_Kip1;
  enddef;

  def comp CycB as
    var CycB: dimensionless {pub: out, init: 0.6};
    var k_1_: first_order_rate_constant {pub: in};
    var k_1: first_order_rate_constant {pub: in};
    var V_2: first_order_rate_constant {pub: in};
    var epsilon: dimensionless {pub: in};
    var J_1: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(CycB, time) = epsilon*(k_1_+k_1*sqr(CycB/J_1)/(1{dimensionless}+sqr(CycB/J_1)))-V_2*CycB;
  enddef;

  def comp CycE as
    var CycE: dimensionless {pub: out};
    var k_7_: first_order_rate_constant {pub: in};
    var k_7: first_order_rate_constant {pub: in};
    var k_25: first_order_rate_constant {pub: in};
    var k_25r: first_order_rate_constant {pub: in};
    var V_8: first_order_rate_constant {pub: in};
    var V_6: first_order_rate_constant {pub: in};
    var epsilon: dimensionless {pub: in};
    var E2FA: dimensionless {pub: in};
    var Kip1: dimensionless {pub: in};
    var CycE_Kip1: dimensionless {pub: in};
    var CycE_T: dimensionless {pub: out};
    var time: hour {pub: in};
    CycE_T = CycE+CycE_Kip1;
    ode(CycE, time) = epsilon*(k_7_+k_7*E2FA)-V_8*CycE-k_25*CycE*Kip1+k_25r*CycE_Kip1+V_6*CycE_Kip1;
  enddef;

  def comp CycD as
    var CycD: dimensionless {pub: out};
    var k_9: first_order_rate_constant {pub: in};
    var k_24r: first_order_rate_constant {pub: in};
    var k_24: first_order_rate_constant {pub: in};
    var k_10: first_order_rate_constant {pub: in};
    var V_6: first_order_rate_constant {pub: in};
    var epsilon: dimensionless {pub: in};
    var DRG: dimensionless {pub: in};
    var Kip1: dimensionless {pub: in};
    var CycD_Kip1: dimensionless {pub: in};
    var CycD_T: dimensionless {pub: out};
    var time: hour {pub: in};
    CycD_T = CycD+CycD_Kip1;
    ode(CycD, time) = epsilon*k_9*DRG+V_6*CycD_Kip1+k_24r*CycD_Kip1-k_24*CycD_Kip1-k_10*CycD;
  enddef;

  def comp Cdc20 as
    var Cdc20: dimensionless {pub: out};
    var k_13: first_order_rate_constant {pub: in};
    var k_14: first_order_rate_constant {pub: in};
    var k_12: first_order_rate_constant {pub: in};
    var IEP: dimensionless {pub: in};
    var Cdc20_T: dimensionless {pub: in};
    var J_13: dimensionless {pub: in};
    var J_4: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(Cdc20, time) = k_13*IEP*(Cdc20_T-Cdc20)/(J_13+Cdc20_T-Cdc20)-Cdc20*k_14/(J_4+Cdc20)-k_12*Cdc20;
  enddef;

  def comp Cdc20_T as
    var Cdc20_T: dimensionless {pub: out};
    var k_11_: first_order_rate_constant {pub: in};
    var k_11: first_order_rate_constant {pub: in};
    var k_12: first_order_rate_constant {pub: in};
    var CycB: dimensionless {pub: in};
    var epsilon: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(Cdc20_T, time) = epsilon*(k_11_+k_11*CycB)-k_12*Cdc20_T;
  enddef;

  def comp IEP as
    var IEP: dimensionless {pub: out};
    var k_31: first_order_rate_constant {pub: in};
    var k_32: first_order_rate_constant {pub: in};
    var CycB: dimensionless {pub: in};
    var PPX: dimensionless {pub: in};
    var J_31: dimensionless {pub: in};
    var J_32: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(IEP, time) = k_31*CycB*(1{dimensionless}-IEP)/(J_31+1{dimensionless}-IEP)-k_32*PPX*IEP/(J_32+IEP);
  enddef;

  def comp PPX as
    var PPX: dimensionless {pub: out};
    var k_33: first_order_rate_constant {pub: in};
    var k_34: first_order_rate_constant {pub: in};
    var epsilon: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(PPX, time) = epsilon*k_33-k_34*PPX;
  enddef;

  def comp E2F as
    var E2F: dimensionless {pub: out};
    var k_22: first_order_rate_constant {pub: in};
    var k_23_: first_order_rate_constant {pub: in};
    var k_23: first_order_rate_constant {pub: in};
    var E2FT: dimensionless {pub: in};
    var CycA: dimensionless {pub: in};
    var CycB: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(E2F, time) = k_22*(E2FT-E2F)-(k_23_+k_23*(CycA+CycB))*E2F;
  enddef;

  def comp Cdh1 as
    var Cdh1: dimensionless {pub: out};
    var k_3_: first_order_rate_constant {pub: in};
    var k_3: first_order_rate_constant {pub: in};
    var V_4: first_order_rate_constant {pub: in};
    var Cdc20: dimensionless {pub: in};
    var J_3: dimensionless {pub: in};
    var J_4: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(Cdh1, time) = (k_3_+k_3*Cdc20)*(1{dimensionless}-Cdh1)/(J_3+1{dimensionless}-Cdh1)-Cdh1*V_4/(J_4+Cdh1);
  enddef;

  def comp GM as
    var GM: dimensionless {pub: out};
    var k_27: first_order_rate_constant {pub: in};
    var k_28: first_order_rate_constant {pub: in};
    var Rb_hypo: dimensionless {pub: in};
    var Rb_T: dimensionless {pub: in};
    var mass: dimensionless {pub: in};
    var H: dimensionless;
    var time: hour {pub: in};
    H = sel
      case Rb_hypo/Rb_T > 0.8{dimensionless}:
        0{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    ode(GM, time) = k_27*mass*H-k_28*GM;
  enddef;

  def comp mass as
    var mass: dimensionless {pub: out, init: 1};
    var mu: first_order_rate_constant {pub: in};
    var epsilon: dimensionless {pub: in};
    var GM: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(mass, time) = epsilon*mu*GM;
  enddef;

  def comp PP1_A as
    var PP1_A: dimensionless {pub: out};
    var PP1_T: dimensionless {pub: out, init: 1};
    var K_21: dimensionless {pub: in};
    var phi_E: dimensionless {pub: in};
    var phi_B: dimensionless {pub: in};
    var CycE: dimensionless {pub: in};
    var CycA: dimensionless {pub: in};
    var CycB: dimensionless {pub: in};
    PP1_A = PP1_T/(1{dimensionless}+K_21*(phi_E*(CycE+CycA)+phi_B*CycB));
  enddef;

  def comp Rb_hypo as
    var Rb_hypo: dimensionless {pub: out};
    var k_20: first_order_rate_constant {pub: in};
    var k_19_: first_order_rate_constant {pub: in};
    var k_19: first_order_rate_constant {pub: in};
    var Rb_T: dimensionless {pub: out, init: 10};
    var PP1_T: dimensionless {pub: in};
    var PP1_A: dimensionless {pub: in};
    var lambda_D: dimensionless {pub: in};
    var lambda_E: dimensionless {pub: in};
    var lambda_A: dimensionless {pub: in};
    var lambda_B: dimensionless {pub: in};
    var CycE: dimensionless {pub: in};
    var CycA: dimensionless {pub: in};
    var CycB: dimensionless {pub: in};
    var CycD_T: dimensionless {pub: in};
    Rb_hypo = Rb_T/(1{dimensionless}+k_20*(lambda_D*CycD_T+lambda_E*CycE+lambda_A*CycA+lambda_B*CycB)/(k_19_*(PP1_T-PP1_A)+k_19*PP1_A));
  enddef;

  def comp E2FA as
    var E2FA: dimensionless {pub: out};
    var E2F: dimensionless {pub: in};
    var E2FT: dimensionless {pub: out, init: 5};
    var E2F_Rb: dimensionless {pub: in};
    E2FA = E2F*(E2FT-E2F_Rb)/E2FT;
  enddef;

  def comp E2F_Rb as
    var E2F_Rb: dimensionless {pub: out};
    var E2FT: dimensionless {pub: in};
    var L: dimensionless {pub: in};
    var Rb_hypo: dimensionless {pub: in};
    E2F_Rb = 2{dimensionless}*E2FT*Rb_hypo/(E2FT+Rb_hypo+L+sqrt(sqr(E2FT+Rb_hypo+L)-4{dimensionless}*E2FT*Rb_hypo));
  enddef;

  def comp V_2 as
    var V_2: first_order_rate_constant {pub: out};
    var k_2_: first_order_rate_constant {pub: in};
    var k_2: first_order_rate_constant {pub: in};
    var k_2__: first_order_rate_constant {pub: in};
    var Cdh1: dimensionless {pub: in};
    var Cdc20: dimensionless {pub: in};
    V_2 = k_2_*(1{dimensionless}-Cdh1)+k_2*Cdh1+k_2__*Cdc20;
  enddef;

  def comp V_4 as
    var V_4: first_order_rate_constant {pub: out};
    var k_4: first_order_rate_constant {pub: in};
    var gamma_A: dimensionless {pub: in};
    var gamma_B: dimensionless {pub: in};
    var CycA: dimensionless {pub: in};
    var CycB: dimensionless {pub: in};
    V_4 = k_4*(gamma_A*CycA+gamma_B*CycB);
  enddef;

  def comp V_6 as
    var V_6: first_order_rate_constant {pub: out};
    var k_6_: first_order_rate_constant {pub: in};
    var k_6: first_order_rate_constant {pub: in};
    var eta_E: dimensionless {pub: in};
    var eta_A: dimensionless {pub: in};
    var eta_B: dimensionless {pub: in};
    var CycA: dimensionless {pub: in};
    var CycB: dimensionless {pub: in};
    var CycE: dimensionless {pub: in};
    V_6 = k_6_+k_6*(eta_E*CycE+eta_A*CycA+eta_B*CycB);
  enddef;

  def comp V_8 as
    var V_8: first_order_rate_constant {pub: out};
    var k_8_: first_order_rate_constant {pub: in};
    var k_8: first_order_rate_constant {pub: in};
    var psi_E: dimensionless {pub: in};
    var psi_B: dimensionless {pub: in};
    var J_8: dimensionless {pub: in};
    var CycE: dimensionless {pub: in};
    var CycA: dimensionless {pub: in};
    var CycB: dimensionless {pub: in};
    var CycE_T: dimensionless {pub: in};
    V_8 = k_8_*k_8*(psi_E*(CycE+CycA)+psi_B*CycB)*1{hour}/(J_8+CycE_T);
  enddef;

  def comp L as
    var L: dimensionless {pub: out};
    var k_26r: first_order_rate_constant {pub: in};
    var k_26: first_order_rate_constant {pub: in};
    var k_20: first_order_rate_constant {pub: in};
    var lambda_D: dimensionless {pub: in};
    var lambda_E: dimensionless {pub: in};
    var lambda_A: dimensionless {pub: in};
    var lambda_B: dimensionless {pub: in};
    var CycD: dimensionless {pub: in};
    var CycE: dimensionless {pub: in};
    var CycA: dimensionless {pub: in};
    var CycB: dimensionless {pub: in};
    L = k_26r/k_26+k_20/k_26*(lambda_D*CycD+lambda_E*CycE+lambda_A*CycA+lambda_B*CycB);
  enddef;

  def comp rate_constants as
    var k_1_: first_order_rate_constant {pub: out, init: 0.1};
    var k_1: first_order_rate_constant {pub: out, init: 0.6};
    var k_2_: first_order_rate_constant {pub: out, init: 0.05};
    var k_2: first_order_rate_constant {pub: out, init: 20};
    var k_2__: first_order_rate_constant {pub: out, init: 1};
    var k_3_: first_order_rate_constant {pub: out, init: 7.5};
    var k_3: first_order_rate_constant {pub: out, init: 140};
    var k_4: first_order_rate_constant {pub: out, init: 40};
    var k_5: first_order_rate_constant {pub: out, init: 20};
    var k_6_: first_order_rate_constant {pub: out, init: 10};
    var k_6: first_order_rate_constant {pub: out, init: 100};
    var k_7_: first_order_rate_constant {pub: out, init: 0};
    var k_7: first_order_rate_constant {pub: out, init: 0.6};
    var k_8_: first_order_rate_constant {pub: out, init: 0.1};
    var k_8: first_order_rate_constant {pub: out, init: 2};
    var k_9: first_order_rate_constant {pub: out, init: 2.5};
    var k_10: first_order_rate_constant {pub: out, init: 5};
    var k_11_: first_order_rate_constant {pub: out, init: 0};
    var k_11: first_order_rate_constant {pub: out, init: 1.5};
    var k_12: first_order_rate_constant {pub: out, init: 1.5};
    var k_13: first_order_rate_constant {pub: out, init: 5};
    var k_14: first_order_rate_constant {pub: out, init: 2.5};
    var k_15: first_order_rate_constant {pub: out, init: 0.25};
    var k_16: first_order_rate_constant {pub: out, init: 0.25};
    var k_17_: first_order_rate_constant {pub: out, init: 0.35};
    var k_17: first_order_rate_constant {pub: out, init: 10};
    var k_18: first_order_rate_constant {pub: out, init: 10};
    var k_19_: first_order_rate_constant {pub: out, init: 0};
    var k_19: first_order_rate_constant {pub: out, init: 20};
    var k_20: first_order_rate_constant {pub: out, init: 10};
    var k_22: first_order_rate_constant {pub: out, init: 1};
    var k_23_: first_order_rate_constant {pub: out, init: 0.005};
    var k_23: first_order_rate_constant {pub: out, init: 1};
    var k_24: first_order_rate_constant {pub: out, init: 1000};
    var k_24r: first_order_rate_constant {pub: out, init: 10};
    var k_25: first_order_rate_constant {pub: out, init: 1000};
    var k_25r: first_order_rate_constant {pub: out, init: 10};
    var k_26: first_order_rate_constant {pub: out, init: 10};
    var k_26r: first_order_rate_constant {pub: out, init: 200};
    var k_27: first_order_rate_constant {pub: out, init: 0.2};
    var k_28: first_order_rate_constant {pub: out, init: 0.2};
    var k_29: first_order_rate_constant {pub: out, init: 0.05};
    var k_30: first_order_rate_constant {pub: out, init: 20};
    var k_31: first_order_rate_constant {pub: out, init: 0.7};
    var k_32: first_order_rate_constant {pub: out, init: 1.8};
    var k_33: first_order_rate_constant {pub: out, init: 0.05};
    var k_34: first_order_rate_constant {pub: out, init: 0.05};
    var mu: first_order_rate_constant {pub: out, init: 0.061};
  enddef;

  def comp dimensionless_constants as
    var J_1: dimensionless {pub: out, init: 0.1};
    var J_3: dimensionless {pub: out, init: 0.01};
    var J_4: dimensionless {pub: out, init: 0.01};
    var J_8: dimensionless {pub: out, init: 0.1};
    var J_13: dimensionless {pub: out, init: 0.005};
    var J_14: dimensionless {pub: out, init: 0.005};
    var J_15: dimensionless {pub: out, init: 0.1};
    var J_17: dimensionless {pub: out, init: 0.3};
    var J_31: dimensionless {pub: out, init: 0.01};
    var J_32: dimensionless {pub: out, init: 0.01};
    var K_21: dimensionless {pub: out, init: 1};
    var phi_E: dimensionless {pub: out, init: 25};
    var phi_B: dimensionless {pub: out, init: 2};
    var gamma_A: dimensionless {pub: out, init: 0.3};
    var gamma_B: dimensionless {pub: out, init: 1};
    var eta_E: dimensionless {pub: out, init: 0.5};
    var eta_A: dimensionless {pub: out, init: 0.5};
    var eta_B: dimensionless {pub: out, init: 1};
    var lambda_D: dimensionless {pub: out, init: 3.3};
    var lambda_E: dimensionless {pub: out, init: 5};
    var lambda_A: dimensionless {pub: out, init: 3};
    var lambda_B: dimensionless {pub: out, init: 5};
    var psi_E: dimensionless {pub: out, init: 1};
    var psi_B: dimensionless {pub: out, init: 0.05};
    var epsilon: dimensionless {pub: out, init: 1};
  enddef;
  def map between ERG and environment for
    vars time and time;
  enddef;
  def map between DRG and environment for
    vars time and time;
  enddef;
  def map between Kip1 and environment for
    vars time and time;
  enddef;
  def map between CycA_Kip1 and environment for
    vars time and time;
  enddef;
  def map between CycD_Kip1 and environment for
    vars time and time;
  enddef;
  def map between CycE_Kip1 and environment for
    vars time and time;
  enddef;
  def map between CycA and environment for
    vars time and time;
  enddef;
  def map between CycB and environment for
    vars time and time;
  enddef;
  def map between CycE and environment for
    vars time and time;
  enddef;
  def map between CycD and environment for
    vars time and time;
  enddef;
  def map between Cdc20 and environment for
    vars time and time;
  enddef;
  def map between Cdc20_T and environment for
    vars time and time;
  enddef;
  def map between IEP and environment for
    vars time and time;
  enddef;
  def map between PPX and environment for
    vars time and time;
  enddef;
  def map between E2F and environment for
    vars time and time;
  enddef;
  def map between Cdh1 and environment for
    vars time and time;
  enddef;
  def map between GM and environment for
    vars time and time;
  enddef;
  def map between mass and environment for
    vars time and time;
  enddef;
  def map between ERG and rate_constants for
    vars k_15 and k_15;
    vars k_16 and k_16;
  enddef;
  def map between ERG and dimensionless_constants for
    vars J_15 and J_15;
    vars epsilon and epsilon;
  enddef;
  def map between ERG and DRG for
    vars DRG and DRG;
    vars ERG and ERG;
  enddef;
  def map between DRG and rate_constants for
    vars k_17_ and k_17_;
    vars k_17 and k_17;
    vars k_18 and k_18;
  enddef;
  def map between DRG and dimensionless_constants for
    vars epsilon and epsilon;
    vars J_17 and J_17;
  enddef;
  def map between Kip1 and rate_constants for
    vars k_5 and k_5;
    vars k_24 and k_24;
    vars k_24r and k_24r;
    vars k_10 and k_10;
    vars k_25 and k_25;
    vars k_25r and k_25r;
    vars k_30 and k_30;
  enddef;
  def map between Kip1 and dimensionless_constants for
    vars epsilon and epsilon;
  enddef;
  def map between Kip1 and V_6 for
    vars V_6 and V_6;
  enddef;
  def map between Kip1 and V_8 for
    vars V_8 and V_8;
  enddef;
  def map between Kip1 and CycD for
    vars CycD and CycD;
    vars Kip1 and Kip1;
  enddef;
  def map between Kip1 and CycA for
    vars CycA and CycA;
    vars Kip1 and Kip1;
  enddef;
  def map between Kip1 and CycE for
    vars CycE and CycE;
    vars Kip1 and Kip1;
  enddef;
  def map between Kip1 and CycD_Kip1 for
    vars CycD_Kip1 and CycD_Kip1;
    vars Kip1 and Kip1;
  enddef;
  def map between Kip1 and CycA_Kip1 for
    vars CycA_Kip1 and CycA_Kip1;
    vars Kip1 and Kip1;
  enddef;
  def map between Kip1 and CycE_Kip1 for
    vars CycE_Kip1 and CycE_Kip1;
    vars Kip1 and Kip1;
  enddef;
  def map between Kip1 and Cdc20 for
    vars Cdc20 and Cdc20;
  enddef;
  def map between CycA_Kip1 and rate_constants for
    vars k_25 and k_25;
    vars k_25r and k_25r;
    vars k_30 and k_30;
  enddef;
  def map between CycA_Kip1 and V_6 for
    vars V_6 and V_6;
  enddef;
  def map between CycA_Kip1 and CycA for
    vars CycA and CycA;
    vars CycA_Kip1 and CycA_Kip1;
  enddef;
  def map between CycA_Kip1 and Cdc20 for
    vars Cdc20 and Cdc20;
  enddef;
  def map between CycD_Kip1 and rate_constants for
    vars k_24 and k_24;
    vars k_24r and k_24r;
    vars k_10 and k_10;
  enddef;
  def map between CycD_Kip1 and V_6 for
    vars V_6 and V_6;
  enddef;
  def map between CycD_Kip1 and CycD for
    vars CycD and CycD;
    vars CycD_Kip1 and CycD_Kip1;
  enddef;
  def map between CycE_Kip1 and rate_constants for
    vars k_25 and k_25;
    vars k_25r and k_25r;
  enddef;
  def map between CycE_Kip1 and V_6 for
    vars V_6 and V_6;
  enddef;
  def map between CycE_Kip1 and V_8 for
    vars V_8 and V_8;
  enddef;
  def map between CycE_Kip1 and CycE for
    vars CycE and CycE;
    vars CycE_Kip1 and CycE_Kip1;
  enddef;
  def map between CycA and rate_constants for
    vars k_29 and k_29;
    vars k_30 and k_30;
    vars k_25 and k_25;
    vars k_25r and k_25r;
  enddef;
  def map between CycA and V_6 for
    vars V_6 and V_6;
    vars CycA and CycA;
  enddef;
  def map between CycA and dimensionless_constants for
    vars epsilon and epsilon;
  enddef;
  def map between CycA and E2FA for
    vars E2FA and E2FA;
  enddef;
  def map between CycA and Cdc20 for
    vars Cdc20 and Cdc20;
  enddef;
  def map between CycA and mass for
    vars mass and mass;
  enddef;
  def map between CycB and rate_constants for
    vars k_1_ and k_1_;
    vars k_1 and k_1;
  enddef;
  def map between CycB and V_2 for
    vars V_2 and V_2;
  enddef;
  def map between CycB and dimensionless_constants for
    vars epsilon and epsilon;
    vars J_1 and J_1;
  enddef;
  def map between CycE and rate_constants for
    vars k_7_ and k_7_;
    vars k_7 and k_7;
    vars k_25 and k_25;
    vars k_25r and k_25r;
  enddef;
  def map between CycE and V_8 for
    vars V_8 and V_8;
    vars CycE and CycE;
    vars CycE_T and CycE_T;
  enddef;
  def map between CycE and V_6 for
    vars V_6 and V_6;
    vars CycE and CycE;
  enddef;
  def map between CycE and dimensionless_constants for
    vars epsilon and epsilon;
  enddef;
  def map between CycE and E2FA for
    vars E2FA and E2FA;
  enddef;
  def map between CycD and rate_constants for
    vars k_9 and k_9;
    vars k_24r and k_24r;
    vars k_24 and k_24;
    vars k_10 and k_10;
  enddef;
  def map between CycD and V_6 for
    vars V_6 and V_6;
  enddef;
  def map between CycD and dimensionless_constants for
    vars epsilon and epsilon;
  enddef;
  def map between CycD and DRG for
    vars DRG and DRG;
  enddef;
  def map between Cdc20 and rate_constants for
    vars k_13 and k_13;
    vars k_14 and k_14;
    vars k_12 and k_12;
  enddef;
  def map between Cdc20 and IEP for
    vars IEP and IEP;
  enddef;
  def map between Cdc20 and Cdc20_T for
    vars Cdc20_T and Cdc20_T;
  enddef;
  def map between Cdc20 and dimensionless_constants for
    vars J_13 and J_13;
    vars J_4 and J_4;
  enddef;
  def map between Cdc20_T and rate_constants for
    vars k_11_ and k_11_;
    vars k_11 and k_11;
    vars k_12 and k_12;
  enddef;
  def map between Cdc20_T and CycB for
    vars CycB and CycB;
  enddef;
  def map between Cdc20_T and dimensionless_constants for
    vars epsilon and epsilon;
  enddef;
  def map between IEP and rate_constants for
    vars k_31 and k_31;
    vars k_32 and k_32;
  enddef;
  def map between IEP and CycB for
    vars CycB and CycB;
  enddef;
  def map between IEP and PPX for
    vars PPX and PPX;
  enddef;
  def map between IEP and dimensionless_constants for
    vars J_31 and J_31;
    vars J_32 and J_32;
  enddef;
  def map between PPX and rate_constants for
    vars k_33 and k_33;
    vars k_34 and k_34;
  enddef;
  def map between PPX and dimensionless_constants for
    vars epsilon and epsilon;
  enddef;
  def map between E2F and rate_constants for
    vars k_22 and k_22;
    vars k_23_ and k_23_;
    vars k_23 and k_23;
  enddef;
  def map between E2F and E2FA for
    vars E2FT and E2FT;
    vars E2F and E2F;
  enddef;
  def map between E2F and CycA for
    vars CycA and CycA;
  enddef;
  def map between E2F and CycB for
    vars CycB and CycB;
  enddef;
  def map between Cdh1 and rate_constants for
    vars k_3_ and k_3_;
    vars k_3 and k_3;
  enddef;
  def map between Cdh1 and V_4 for
    vars V_4 and V_4;
  enddef;
  def map between Cdh1 and Cdc20 for
    vars Cdc20 and Cdc20;
  enddef;
  def map between Cdh1 and dimensionless_constants for
    vars J_3 and J_3;
    vars J_4 and J_4;
  enddef;
  def map between GM and rate_constants for
    vars k_27 and k_27;
    vars k_28 and k_28;
  enddef;
  def map between GM and Rb_hypo for
    vars Rb_hypo and Rb_hypo;
    vars Rb_T and Rb_T;
  enddef;
  def map between GM and mass for
    vars mass and mass;
    vars GM and GM;
  enddef;
  def map between mass and rate_constants for
    vars mu and mu;
  enddef;
  def map between mass and dimensionless_constants for
    vars epsilon and epsilon;
  enddef;
  def map between PP1_A and dimensionless_constants for
    vars K_21 and K_21;
    vars phi_E and phi_E;
    vars phi_B and phi_B;
  enddef;
  def map between PP1_A and CycE for
    vars CycE and CycE;
  enddef;
  def map between PP1_A and CycA for
    vars CycA and CycA;
  enddef;
  def map between PP1_A and CycB for
    vars CycB and CycB;
  enddef;
  def map between Rb_hypo and rate_constants for
    vars k_20 and k_20;
    vars k_19_ and k_19_;
    vars k_19 and k_19;
  enddef;
  def map between Rb_hypo and PP1_A for
    vars PP1_T and PP1_T;
    vars PP1_A and PP1_A;
  enddef;
  def map between Rb_hypo and dimensionless_constants for
    vars lambda_D and lambda_D;
    vars lambda_E and lambda_E;
    vars lambda_A and lambda_A;
    vars lambda_B and lambda_B;
  enddef;
  def map between Rb_hypo and CycE for
    vars CycE and CycE;
  enddef;
  def map between Rb_hypo and CycA for
    vars CycA and CycA;
  enddef;
  def map between Rb_hypo and CycB for
    vars CycB and CycB;
  enddef;
  def map between Rb_hypo and CycD for
    vars CycD_T and CycD_T;
  enddef;
  def map between E2FA and E2F_Rb for
    vars E2F_Rb and E2F_Rb;
    vars E2FT and E2FT;
  enddef;
  def map between E2F_Rb and L for
    vars L and L;
  enddef;
  def map between E2F_Rb and Rb_hypo for
    vars Rb_hypo and Rb_hypo;
  enddef;
  def map between V_2 and rate_constants for
    vars k_2_ and k_2_;
    vars k_2 and k_2;
    vars k_2__ and k_2__;
  enddef;
  def map between V_2 and Cdh1 for
    vars Cdh1 and Cdh1;
  enddef;
  def map between V_2 and Cdc20 for
    vars Cdc20 and Cdc20;
  enddef;
  def map between V_4 and rate_constants for
    vars k_4 and k_4;
  enddef;
  def map between V_4 and dimensionless_constants for
    vars gamma_A and gamma_A;
    vars gamma_B and gamma_B;
  enddef;
  def map between V_4 and CycA for
    vars CycA and CycA;
  enddef;
  def map between V_4 and CycB for
    vars CycB and CycB;
  enddef;
  def map between V_6 and rate_constants for
    vars k_6_ and k_6_;
    vars k_6 and k_6;
  enddef;
  def map between V_6 and dimensionless_constants for
    vars eta_E and eta_E;
    vars eta_A and eta_A;
    vars eta_B and eta_B;
  enddef;
  def map between V_6 and CycB for
    vars CycB and CycB;
  enddef;
  def map between V_8 and rate_constants for
    vars k_8_ and k_8_;
    vars k_8 and k_8;
  enddef;
  def map between V_8 and dimensionless_constants for
    vars psi_E and psi_E;
    vars psi_B and psi_B;
    vars J_8 and J_8;
  enddef;
  def map between V_8 and CycA for
    vars CycA and CycA;
  enddef;
  def map between V_8 and CycB for
    vars CycB and CycB;
  enddef;
  def map between L and rate_constants for
    vars k_26r and k_26r;
    vars k_26 and k_26;
    vars k_20 and k_20;
  enddef;
  def map between L and dimensionless_constants for
    vars lambda_D and lambda_D;
    vars lambda_E and lambda_E;
    vars lambda_A and lambda_A;
    vars lambda_B and lambda_B;
  enddef;
  def map between L and CycD for
    vars CycD and CycD;
  enddef;
  def map between L and CycE for
    vars CycE and CycE;
  enddef;
  def map between L and CycA for
    vars CycA and CycA;
  enddef;
  def map between L and CycB for
    vars CycB and CycB;
  enddef;
enddef;
