<?xml version="1.0"?>
<!--
This CellML file was generated on 6/01/2009 at 3:20:37 at p.m. using:

COR (0.9.31.1125)
Copyright 2002-2009 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="obeyesekere_1999" name="obeyesekere_1999">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>A model of cell cycle behavior dominated by kinetics of a pathway stimulated by growth factors</title>
				<author>
					<firstname>Jeelean</firstname>
					<surname>Lim</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This CellML version of the model has been checked in COR and PCEnv and the model runs to replicate the original published results as depicted in figure 3a of the paper.  The units have been checked and are consistent. Additional variables 'free-E2F' and 'unphos-RB' were added for plotting.
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT:  A modified version of a previously developed mathematical model [Obeyesekere <emphasis>et al.</emphasis>, Cell Prolif. (1997)] of the G1-phase of the cell cycle is presented. This model describes the regulation of the G1-phase that includes the interactions of the nuclear proteins, RB, cyclin E, cyclin D, cdk2, cdk4 and E2F. The effects of the growth factors on cyclin D synthesis under saturated or unsaturated growth factor conditions are investigated based on this model. The solutions to this model (a system of nonlinear ordinary differential equations) are discussed with respect to existing experiments. Predictions based on mathematical analysis of this model are presented. In particular, results are presented on the existence of two stablesolutions, i.e., bistability within the G1-phase. It is shown that this bistability exists under unsaturated growth factor concentration levels. This phenomenon is very noticeable if the efficiency of the signal transduction, initiated by the growth factors leading to cyclin D synthesis, is low. The biological significance of this result as well as possible experimental designs to test these predictions are presented.
				</para>
				<para>
The original paper reference is cited below:
				</para>
				<para>
					A model of cell cycle behavior dominated by kinetics of a pathway stimulated by growth factors, Mandri N. Obeyesekere, Stuart O. Zimmerman, Edwin S. Tecarro and Giles Auchmuty, 1999, <emphasis>Bulletin of Mathematical Biology</emphasis>, 61, 917-934. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/17886749">PubMed ID: 17886749</ulink>
				</para>
				
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>cell diagram</title>
							</objectinfo>
							<imagedata fileref="obeyesekere_1999.png"/>
						</imageobject>
					</mediaobject>
					<caption>Flowchart illustrating the protein interactions described by the model.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	
	
   <units name="millimolar">
      <unit prefix="milli" units="mole"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="minute">
      <unit multiplier="60" units="second"/>
   </units>
   <units name="flux">
      <unit units="millimolar"/>
      <unit exponent="-1" units="minute"/>
   </units>
   <units name="first_order_rate_constant">
      <unit exponent="-1" units="minute"/>
   </units>
   
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="minute"/>
   </component>
   
   <component name="parameters">
      <variable initial_value="0.4" name="a_D" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.16" name="a_E" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.08" name="a_X" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.05" name="k" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.6" name="q_D" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.6" name="q_E" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.8" name="q_X" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.2" name="f" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.528" name="g" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.6" name="p_S" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.48" name="p_D" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.096" name="p_E" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.48" name="p_X" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.4" name="d_D" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.2" name="d_E" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="1.04" name="d_X" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.9" name="a_f" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="2.5" name="R_T" public_interface="out" units="dimensionless"/>
      <variable initial_value="1.5" name="theta" public_interface="out" units="dimensionless"/>
      <variable initial_value="6.3" name="GF" public_interface="out" units="dimensionless"/>
   </component>
   
   <component cmeta:id="D" name="D">
     
      <variable cmeta:id="D_D" initial_value="0.1" name="D" public_interface="out" units="dimensionless"/>
      <variable name="a_D" public_interface="in" units="first_order_rate_constant"/>
      <variable name="d_D" public_interface="in" units="first_order_rate_constant"/>
      <variable name="k" public_interface="in" units="dimensionless"/>
      <variable name="GF" public_interface="in" units="dimensionless"/>
      <variable name="E" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>D</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>a_D</ci>
                     <ci>k</ci>
                     <ci>GF</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <apply>
                        <times/>
                        <ci>k</ci>
                        <ci>GF</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>d_D</ci>
                  <ci>E</ci>
                  <ci>D</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component cmeta:id="E" name="E">
     
      <variable cmeta:id="E_E" initial_value="0.6" name="E" public_interface="out" units="dimensionless"/>
      <variable name="a_E" public_interface="in" units="first_order_rate_constant"/>
      <variable name="a_f" public_interface="in" units="first_order_rate_constant"/>
      <variable name="d_E" public_interface="in" units="first_order_rate_constant"/>
      <variable name="theta" public_interface="in" units="dimensionless"/>
      <variable name="R_S" public_interface="in" units="dimensionless"/>
      <variable name="X" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>E</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>a_E</ci>
                  <apply>
                     <plus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="first_order_rate_constant">1</cn>
                     <apply>
                        <times/>
                        <ci>a_f</ci>
                        <apply>
                           <minus/>
                           <ci>theta</ci>
                           <ci>R_S</ci>
                        </apply>
                     </apply>
                  </apply>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="minute">1</cn>
               </apply>
               <apply>
                  <times/>
                  <ci>d_E</ci>
                  <ci>X</ci>
                  <ci>E</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component cmeta:id="R" name="R">
     
      <variable cmeta:id="R_R" initial_value="0.5" name="R" public_interface="out" units="dimensionless"/>
      <variable name="p_X" public_interface="in" units="first_order_rate_constant"/>
      <variable name="p_S" public_interface="in" units="first_order_rate_constant"/>
      <variable name="X" public_interface="in" units="dimensionless"/>
      <variable name="R_T" public_interface="in" units="dimensionless"/>
      <variable name="q_X" public_interface="in" units="dimensionless"/>
      <variable name="R_S" public_interface="in" units="dimensionless"/>
      <variable name="theta" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>R</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>p_X</ci>
                     <ci>X</ci>
                     <apply>
                        <minus/>
                        <apply>
                           <minus/>
                           <ci>R_T</ci>
                           <ci>R_S</ci>
                        </apply>
                        <ci>R</ci>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>q_X</ci>
                     <apply>
                        <minus/>
                        <apply>
                           <minus/>
                           <ci>R_T</ci>
                           <ci>R_S</ci>
                        </apply>
                        <ci>R</ci>
                     </apply>
                     <ci>X</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>p_S</ci>
                  <apply>
                     <minus/>
                     <ci>theta</ci>
                     <ci>R_S</ci>
                  </apply>
                  <ci>R</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component cmeta:id="R_S" name="R_S">
     
      <variable cmeta:id="R_S_R_S" initial_value="1" name="R_S" public_interface="out" units="dimensionless"/>
      <variable name="p_S" public_interface="in" units="first_order_rate_constant"/>
      <variable name="p_D" public_interface="in" units="first_order_rate_constant"/>
      <variable name="p_E" public_interface="in" units="first_order_rate_constant"/>
      <variable name="theta" public_interface="in" units="dimensionless"/>
      <variable name="R" public_interface="in" units="dimensionless"/>
      <variable name="D" public_interface="in" units="dimensionless"/>
      <variable name="q_D" public_interface="in" units="dimensionless"/>
      <variable name="q_E" public_interface="in" units="dimensionless"/>
      <variable name="E" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>R_S</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <times/>
                     <ci>p_S</ci>
                     <apply>
                        <minus/>
                        <ci>theta</ci>
                        <ci>R_S</ci>
                     </apply>
                     <ci>R</ci>
                  </apply>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>p_D</ci>
                        <ci>R_S</ci>
                        <ci>D</ci>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>q_D</ci>
                        <ci>R_S</ci>
                        <ci>D</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>p_E</ci>
                     <ci>R_S</ci>
                     <ci>E</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>q_E</ci>
                     <ci>R_S</ci>
                     <ci>E</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component cmeta:id="X" name="X">
     
      <variable cmeta:id="X_X" initial_value="0.7" name="X" public_interface="out" units="dimensionless"/>
      <variable name="a_X" public_interface="in" units="first_order_rate_constant"/>
      <variable name="f" public_interface="in" units="first_order_rate_constant"/>
      <variable name="g" public_interface="in" units="first_order_rate_constant"/>
      <variable name="d_X" public_interface="in" units="first_order_rate_constant"/>
      <variable name="E" public_interface="in" units="dimensionless"/>
      <variable name="theta" public_interface="in" units="dimensionless"/>
      <variable name="R_S" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>X</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>a_X</ci>
                     <ci>E</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>f</ci>
                     <apply>
                        <minus/>
                        <ci>theta</ci>
                        <ci>R_S</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>g</ci>
                     <apply>
                        <power/>
                        <ci>X</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                     </apply>
                     <ci>E</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>d_X</ci>
                  <ci>X</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component cmeta:id="unpho_RB" name="unpho_RB">
     
      <variable cmeta:id="unpho_RB_unpho_RB" name="unpho_RB" public_interface="out" units="dimensionless"/>
      <variable name="R" public_interface="in" units="dimensionless"/>
      <variable name="R_S" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>unpho_RB</ci>
            <apply>
               <plus/>
               <ci>R</ci>
               <ci>R_S</ci>
            </apply>
         </apply>
      </math>
   </component>
   
   <component cmeta:id="free_E2F" name="free_E2F">
     
      <variable cmeta:id="free_E2F_free_E2F" name="free_E2F" public_interface="out" units="dimensionless"/>
      <variable name="theta" public_interface="in" units="dimensionless"/>
      <variable name="R_S" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>free_E2F</ci>
            <apply>
               <minus/>
               <ci>theta</ci>
               <ci>R_S</ci>
            </apply>
         </apply>
      </math>
   </component>
   
   <connection>
      <map_components component_1="unpho_RB" component_2="R"/>
      <map_variables variable_1="R" variable_2="R"/>
   </connection>
   <connection>
      <map_components component_1="unpho_RB" component_2="R_S"/>
      <map_variables variable_1="R_S" variable_2="R_S"/>
   </connection>
   <connection>
      <map_components component_1="free_E2F" component_2="parameters"/>
      <map_variables variable_1="theta" variable_2="theta"/>
   </connection>
   <connection>
      <map_components component_1="free_E2F" component_2="R_S"/>
      <map_variables variable_1="R_S" variable_2="R_S"/>
   </connection>
   <connection>
      <map_components component_1="D" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="E" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="R" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="R_S" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="X" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="D" component_2="parameters"/>
      <map_variables variable_1="a_D" variable_2="a_D"/>
      <map_variables variable_1="d_D" variable_2="d_D"/>
      <map_variables variable_1="k" variable_2="k"/>
      <map_variables variable_1="GF" variable_2="GF"/>
   </connection>
   <connection>
      <map_components component_1="D" component_2="E"/>
      <map_variables variable_1="E" variable_2="E"/>
   </connection>
   <connection>
      <map_components component_1="E" component_2="parameters"/>
      <map_variables variable_1="a_E" variable_2="a_E"/>
      <map_variables variable_1="a_f" variable_2="a_f"/>
      <map_variables variable_1="d_E" variable_2="d_E"/>
      <map_variables variable_1="theta" variable_2="theta"/>
   </connection>
   <connection>
      <map_components component_1="E" component_2="R_S"/>
      <map_variables variable_1="R_S" variable_2="R_S"/>
      <map_variables variable_1="E" variable_2="E"/>
   </connection>
   <connection>
      <map_components component_1="E" component_2="X"/>
      <map_variables variable_1="X" variable_2="X"/>
      <map_variables variable_1="E" variable_2="E"/>
   </connection>
   <connection>
      <map_components component_1="R" component_2="parameters"/>
      <map_variables variable_1="p_X" variable_2="p_X"/>
      <map_variables variable_1="p_S" variable_2="p_S"/>
      <map_variables variable_1="R_T" variable_2="R_T"/>
      <map_variables variable_1="q_X" variable_2="q_X"/>
      <map_variables variable_1="theta" variable_2="theta"/>
   </connection>
   <connection>
      <map_components component_1="R" component_2="X"/>
      <map_variables variable_1="X" variable_2="X"/>
   </connection>
   <connection>
      <map_components component_1="R" component_2="R_S"/>
      <map_variables variable_1="R_S" variable_2="R_S"/>
      <map_variables variable_1="R" variable_2="R"/>
   </connection>
   <connection>
      <map_components component_1="R_S" component_2="parameters"/>
      <map_variables variable_1="p_S" variable_2="p_S"/>
      <map_variables variable_1="p_D" variable_2="p_D"/>
      <map_variables variable_1="p_E" variable_2="p_E"/>
      <map_variables variable_1="theta" variable_2="theta"/>
      <map_variables variable_1="q_D" variable_2="q_D"/>
      <map_variables variable_1="q_E" variable_2="q_E"/>
   </connection>
   <connection>
      <map_components component_1="R_S" component_2="D"/>
      <map_variables variable_1="D" variable_2="D"/>
   </connection>
   <connection>
      <map_components component_1="X" component_2="parameters"/>
      <map_variables variable_1="a_X" variable_2="a_X"/>
      <map_variables variable_1="f" variable_2="f"/>
      <map_variables variable_1="g" variable_2="g"/>
      <map_variables variable_1="d_X" variable_2="d_X"/>
      <map_variables variable_1="theta" variable_2="theta"/>
   </connection>
   <connection>
      <map_components component_1="X" component_2="R_S"/>
      <map_variables variable_1="R_S" variable_2="R_S"/>
   </connection>

   
   
<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
<rdf:Description rdf:about="rdf:#d26f0b8a-3604-4c8d-9cb1-e5dae1e5dc55">
<rdf:value xml:lang="en">This is the CellML description of Obeyesekere et al.'s 1999 mathematical model of cell cycle behavior dominated by kinetics of a pathway stimulated by growth factors.</rdf:value>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#ba89893f-8cf2-44ae-b9f6-91bb66555c1f"/>
</creator>
</rdf:Description>
<rdf:Description rdf:about="rdf:#c4ddab4c-4cda-4808-b2bc-2b1376ef2382">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
</rdf:type>
<rdf:_1>
<rdf:Description rdf:about="rdf:#bb12b186-fc28-49c5-bbed-84e9b4ecbd45"/>
</rdf:_1>
<rdf:_2>
<rdf:Description rdf:about="rdf:#5bdbc867-b8d5-472e-a3cc-8a906eb1e773"/>
</rdf:_2>
<rdf:_3>
<rdf:Description rdf:about="rdf:#181b0e40-4483-473b-a49c-5f55e10b62d1"/>
</rdf:_3>
<rdf:_4>
<rdf:Description rdf:about="rdf:#b46952a2-1bb8-448f-8781-82fa55c2314b"/>
</rdf:_4>
</rdf:Description>
<rdf:Description rdf:nodeID="n1">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/>
</rdf:type>
<rdf:_1 xml:lang="en">cell cycle</rdf:_1>
</rdf:Description>
<rdf:Description rdf:about="rdf:#b46952a2-1bb8-448f-8781-82fa55c2314b">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#6fd700d4-d132-4e0a-b726-73f38c812b9f"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#0d23ef9e-47ae-432d-a513-c869cef0b908">
<rdf:type>
<rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/>
</rdf:type>
<rdf:value xml:lang="en">jlim063@aucklanduni.ac.nz</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#57494639-c1e0-4de1-8c40-f103f62d21cc">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">A model of cell cycle behavior dominated by kinetics of a pathway stimulated by growth factors</title>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#c4ddab4c-4cda-4808-b2bc-2b1376ef2382"/>
</creator>
<Journal xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#b3d18a0b-b8da-4cfb-8f46-a4b227dacd06"/>
</Journal>
<first_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">917</first_page>
<volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">61</volume>
<issued xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#1d49055f-d8c0-4114-b723-30a5fe63f1fd"/>
</issued>
<last_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">934</last_page>
</rdf:Description>
<rdf:Description rdf:about="rdf:#252f8e90-6423-4bf3-9634-7f4dec6bf421">
<EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#0d23ef9e-47ae-432d-a513-c869cef0b908"/>
</EMAIL>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#7f48c3d8-9d62-4f84-9fcd-5cc88119da33"/>
</N>
<ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#096cb0ea-7ad8-4d00-a362-58fe763fb5d9"/>
</ORG>
</rdf:Description>
<rdf:Description rdf:about="rdf:#6fd700d4-d132-4e0a-b726-73f38c812b9f">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Auchmuty </Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Giles</Given>
</rdf:Description>
<rdf:Description rdf:about="#free_E2F">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">free_E2F</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">free E2F</alternative>
</rdf:Description>
<rdf:Description rdf:about="">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#252f8e90-6423-4bf3-9634-7f4dec6bf421"/>
</creator>
<cmeta:comment>
<rdf:Description rdf:about="rdf:#63a820bb-5de7-4cfb-8227-de334743aa22"/>
</cmeta:comment>
<created xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#9285ddb2-e7ce-4e77-84ee-860948d8e1ee"/>
</created>
<publisher xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en"></publisher>
</rdf:Description>
<rdf:Description rdf:about="rdf:#ba89893f-8cf2-44ae-b9f6-91bb66555c1f">
<FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Jeelean Lim</FN>
</rdf:Description>
<rdf:Description rdf:nodeID="n2">
<subject xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n3"/>
</subject>
</rdf:Description>
<rdf:Description rdf:about="#X">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">X</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">Cell Progression Indicator (CPI)</alternative>
</rdf:Description>
<rdf:Description rdf:about="rdf:#b3d18a0b-b8da-4cfb-8f46-a4b227dacd06">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Bulletin of Mathematical Biology</title>
</rdf:Description>
<rdf:Description rdf:about="#D">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">D</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">cyclin D/cdk4 complex</alternative>
</rdf:Description>
<rdf:Description rdf:about="#R">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">R</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">unphosphorylated, free RB</alternative>
</rdf:Description>
<rdf:Description rdf:about="rdf:#8405274f-e678-4b1a-9586-8883b4b4484c">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Tecarro </Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Edwin</Given>
</rdf:Description>
<rdf:Description rdf:about="rdf:#1d49055f-d8c0-4114-b723-30a5fe63f1fd">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">1999-09-00 00:00</W3CDTF>
</rdf:Description>
<rdf:Description rdf:nodeID="n3">
<subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type>
<rdf:value>
<rdf:Description rdf:nodeID="n1"/>
</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="#unpho_RB">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">unpho_RB</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">unphosphorylated RB</alternative>
</rdf:Description>
<rdf:Description rdf:about="rdf:#9e8abe6c-7f94-4fd9-b0df-3476f55cc563">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Obeyesekere </Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Mandri</Given>
</rdf:Description>
<rdf:Description rdf:about="rdf:#5bdbc867-b8d5-472e-a3cc-8a906eb1e773">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#9299945a-62fc-4d39-9934-b04ec6554a6a"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#9d6d0b49-ea7f-47df-9394-dae4ef3236b2">
<FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Jeelean Lim</FN>
</rdf:Description>
<rdf:Description rdf:about="#obeyesekere_1999">
<cmeta:comment>
<rdf:Description rdf:about="rdf:#d26f0b8a-3604-4c8d-9cb1-e5dae1e5dc55"/>
</cmeta:comment>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#04f672c8-8b66-47ce-9cf7-0c3590b79da0"/>
</reference>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n2"/>
</reference>
<simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n4"/>
</simulation>
</rdf:Description>
<rdf:Description rdf:nodeID="n4">
<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n5"/>
</boundIntervals>
</rdf:Description>
<rdf:Description rdf:about="rdf:#9299945a-62fc-4d39-9934-b04ec6554a6a">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Zimmerman </Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Stuart</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n6">
<pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">10000</pointDensity>
<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">100</endingValue>
</rdf:Description>
<rdf:Description rdf:about="#E">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">E</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">cyclin E/cdk2 complex</alternative>
</rdf:Description>
<rdf:Description rdf:about="rdf:#04f672c8-8b66-47ce-9cf7-0c3590b79da0">
<JournalArticle xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#57494639-c1e0-4de1-8c40-f103f62d21cc"/>
</JournalArticle>
<Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">17886749</Pubmed_id>
</rdf:Description>
<rdf:Description rdf:about="rdf:#63a820bb-5de7-4cfb-8227-de334743aa22">
<rdf:value xml:lang="en">This CellML version of the model has been checked in COR and PCEnv and the model runs to replicate the original published results as depicted in figure 3a of the paper. The units have been checked and are consistent.</rdf:value>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#9d6d0b49-ea7f-47df-9394-dae4ef3236b2"/>
</creator>
</rdf:Description>
<rdf:Description rdf:about="rdf:#7f48c3d8-9d62-4f84-9fcd-5cc88119da33">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lim</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Jeelean</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en"></Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#bb12b186-fc28-49c5-bbed-84e9b4ecbd45">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#9e8abe6c-7f94-4fd9-b0df-3476f55cc563"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#096cb0ea-7ad8-4d00-a362-58fe763fb5d9">
<Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Auckland Bioengineering Institute</Orgunit>
<Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The University of Auckland</Orgname>
</rdf:Description>
<rdf:Description rdf:about="#R_S">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">R_S</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">RB/E2F complex</alternative>
</rdf:Description>
<rdf:Description rdf:about="rdf:#9285ddb2-e7ce-4e77-84ee-860948d8e1ee">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2009-01-23T00:00:00+00:00</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#181b0e40-4483-473b-a49c-5f55e10b62d1">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#8405274f-e678-4b1a-9586-8883b4b4484c"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n5">
<rdf:first>
<rdf:Description rdf:nodeID="n6"/>
</rdf:first>
<rdf:rest>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
</rdf:rest>
</rdf:Description>
</rdf:RDF>
</model>