<?xml version="1.0"?>
<!--
This CellML file was generated on 11/02/2009 at 3:06:39 at p.m. using:

COR (0.9.31.1125)
Copyright 2002-2009 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="sriram_bernot_kepes_2007_version01" name="sriram_bernot_kepes_2007_version01">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>A minimal mathematical model combining several regulatory cycles from the budding yeast cell cycle</title>
				<author>
					<firstname>Jeelean</firstname>
					<surname>Lim</surname>
					<affiliation>
						<shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This CellML version of the model has been checked in COR and PCEnv and the model runs to replicate the original published results as depicted in figure 12 of the paper. The units have been checked and are consistent. 
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT:  A novel topology of regulatory networks abstracted from the budding yeast cell cycle is studied by constructing a simple nonlinear model. A ternary positive feedback loop with only positive regulations is constructed with elements that activates the subsequent element in a clockwise fashion. A ternary negative feedback loop with only negative regulations is constructed with the elements that inhibit the subsequent element in an anticlockwise fashion. Positive feedback loop exhibits bistability, whereas the negative feedback loop exhibits limit cycle oscillations. The novelty of the topology is that the corresponding elements in these two homogeneous feedback loops are linked by the binary positive feedback loops with only positive regulations. This results in the emergence of mixed feedback loops in the network that displays complex behaviour like the coexistence of multiple steady states, relaxation oscillations and chaos. Importantly, the arrangement of the feedback loops brings in the notion of checkpoint in the model. The model also exhibits domino-like behaviour, where the limit cycle oscillations take place in a stepwise fashion. As the aforementioned topology is abstracted from the budding yeast cell cycle, the events that govern the cell cycle are considered for the present study. In budding yeast, the sequential activation of the transcription factors, cyclins and their inhibitors form mixed feedback loops. The transcription factors that involve in the positive regulation in a clockwise orientation generates ternary positive feedback loop, while the cyclins and their inhibitors that involve in the negative regulation in an anticlockwise orientation generates ternary negative feedback loop. The mutual regulation between the corresponding elements in the transcription factors and the cyclins and their inhibitors generates binary positive feedback loops. The bifurcation diagram constructed for the whole system can be related to the different events of the cell cycle in terms of dynamical system theory. The checkpoint mechanism that plays an important role in different phases of the cell cycle are accounted for by silencing appropriate feedback loops in the model.
				</para>
			
				<para>
The original paper reference is cited below:
				</para>
				<para>
A minimal mathematical model combining several regulatory cycles from the budding yeast cell cycle, K. Sriram, G. Bernot and F. Kepes, 2007, <emphasis>IET systems biology</emphasis>, 1, 326-341.<ulink url="http://www.ncbi.nlm.nih.gov/pubmed/18203579">PubMed ID: 18203579</ulink>
				</para>
				
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>figure 1</title>
							</objectinfo>
							<imagedata fileref="sriram_2007a.png"/>
						</imageobject>
					</mediaobject>
					<caption>Common feedback loops studied in the biological systems</caption>
				</informalfigure>
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>figure 2</title>
							</objectinfo>
							<imagedata fileref="sriram_2007b.png"/>
						</imageobject>
					</mediaobject>
					<caption>Regulatory networks of homogeneous and mixed feedback loops</caption>
				</informalfigure>
				
			</sect1>
		</article>
	</documentation>   
	
	<units name="nanomolar">
      <unit prefix="nano" units="mole"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="minute">
      <unit multiplier="60" units="second"/>
   </units>
   <units name="flux">
      <unit units="nanomolar"/>
      <unit exponent="-1" units="minute"/>
   </units>
   <units name="first_order_rate_constant">
      <unit exponent="-1" units="minute"/>
   </units>
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="minute"/>
   </component>
   <component name="parameters">
      <variable initial_value="0.9" name="j_1" public_interface="out" units="flux"/>
      <variable initial_value="0.5" name="j_2" public_interface="out" units="flux"/>
      <variable initial_value="0.6" name="j_3" public_interface="out" units="flux"/>
      <variable initial_value="6" name="v_d1" public_interface="out" units="flux"/>
      <variable initial_value="1.052" name="v_d2" public_interface="out" units="flux"/>
      <variable initial_value="3" name="v_d3" public_interface="out" units="flux"/>
      <variable initial_value="0.8" name="k_d1" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.9" name="k_d2" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.8" name="k_d3" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.2" name="k_c1" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.22" name="k_c2" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.6" name="k_c3" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="5" name="k_m1" public_interface="out" units="nanomolar"/>
      <variable initial_value="5" name="k_m2" public_interface="out" units="nanomolar"/>
      <variable initial_value="5" name="k_m3" public_interface="out" units="nanomolar"/>
      <variable initial_value="15" name="v_12" public_interface="out" units="flux"/>
      <variable initial_value="15" name="v_11" public_interface="out" units="flux"/>
      <variable initial_value="15" name="v_10" public_interface="out" units="flux"/>
      <variable initial_value="10" name="k_120" public_interface="out" units="nanomolar"/>
      <variable initial_value="10" name="k_110" public_interface="out" units="nanomolar"/>
      <variable initial_value="10" name="k_100" public_interface="out" units="nanomolar"/>
      <variable initial_value="0.16" name="k_d4" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.16" name="k_d5" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.16" name="k_d6" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="2" name="n" public_interface="out" units="dimensionless"/>
   </component>
   <component name="C_1">
      <variable cmeta:id="C_1_C_1" initial_value="0" name="C_1" public_interface="out" units="nanomolar"/>
      <variable name="v_12" public_interface="in" units="flux"/>
      <variable name="k_120" public_interface="in" units="nanomolar"/>
      <variable name="k_d4" public_interface="in" units="first_order_rate_constant"/>
      <variable name="C_2" public_interface="in" units="nanomolar"/>
      <variable name="T_1" public_interface="in" units="nanomolar"/>
      <variable name="n" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C_1</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>v_12</ci>
                     <apply>
                        <power/>
                        <ci>T_1</ci>
                        <ci>n</ci>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <apply>
                        <power/>
                        <ci>k_120</ci>
                        <ci>n</ci>
                     </apply>
                     <apply>
                        <power/>
                        <ci>T_1</ci>
                        <ci>n</ci>
                     </apply>
                     <apply>
                        <power/>
                        <ci>C_2</ci>
                        <ci>n</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>k_d4</ci>
                  <ci>C_1</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="C_2">
      <variable cmeta:id="C_2_C_2" initial_value="0" name="C_2" public_interface="out" units="nanomolar"/>
      <variable name="v_11" public_interface="in" units="flux"/>
      <variable name="k_110" public_interface="in" units="nanomolar"/>
      <variable name="k_d5" public_interface="in" units="first_order_rate_constant"/>
      <variable name="C_3" public_interface="in" units="nanomolar"/>
      <variable name="T_2" public_interface="in" units="nanomolar"/>
      <variable name="n" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C_2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>v_11</ci>
                     <apply>
                        <power/>
                        <ci>T_2</ci>
                        <ci>n</ci>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <apply>
                        <power/>
                        <ci>k_110</ci>
                        <ci>n</ci>
                     </apply>
                     <apply>
                        <power/>
                        <ci>T_2</ci>
                        <ci>n</ci>
                     </apply>
                     <apply>
                        <power/>
                        <ci>C_3</ci>
                        <ci>n</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>k_d5</ci>
                  <ci>C_2</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="C_3">
      <variable cmeta:id="C_3_C_3" initial_value="0" name="C_3" public_interface="out" units="nanomolar"/>
      <variable name="v_10" public_interface="in" units="flux"/>
      <variable name="k_100" public_interface="in" units="nanomolar"/>
      <variable name="k_d6" public_interface="in" units="first_order_rate_constant"/>
      <variable name="C_1" public_interface="in" units="nanomolar"/>
      <variable name="T_3" public_interface="in" units="nanomolar"/>
      <variable name="n" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C_3</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>v_10</ci>
                     <apply>
                        <power/>
                        <ci>T_3</ci>
                        <ci>n</ci>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <apply>
                        <power/>
                        <ci>k_100</ci>
                        <ci>n</ci>
                     </apply>
                     <apply>
                        <power/>
                        <ci>T_3</ci>
                        <ci>n</ci>
                     </apply>
                     <apply>
                        <power/>
                        <ci>C_1</ci>
                        <ci>n</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>k_d6</ci>
                  <ci>C_3</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="T_1">
      <variable cmeta:id="T_1_T_1" initial_value="6" name="T_1" public_interface="out" units="nanomolar"/>
      <variable name="v_d1" public_interface="in" units="flux"/>
      <variable name="j_1" public_interface="in" units="flux"/>
      <variable name="k_m1" public_interface="in" units="nanomolar"/>
      <variable name="k_d1" public_interface="in" units="first_order_rate_constant"/>
      <variable name="k_c1" public_interface="in" units="first_order_rate_constant"/>
      <variable name="T_3" public_interface="in" units="nanomolar"/>
      <variable name="C_1" public_interface="in" units="nanomolar"/>
      <variable name="n" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>T_1</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <ci>j_1</ci>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>v_d1</ci>
                        <apply>
                           <power/>
                           <ci>T_3</ci>
                           <ci>n</ci>
                        </apply>
                     </apply>
                     <apply>
                        <plus/>
                        <apply>
                           <power/>
                           <ci>k_m1</ci>
                           <ci>n</ci>
                        </apply>
                        <apply>
                           <power/>
                           <ci>T_3</ci>
                           <ci>n</ci>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k_c1</ci>
                     <ci>C_1</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>k_d1</ci>
                  <ci>T_1</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="T_2">
      <variable cmeta:id="T_2_T_2" initial_value="5" name="T_2" public_interface="out" units="nanomolar"/>
      <variable name="v_d2" public_interface="in" units="flux"/>
      <variable name="j_2" public_interface="in" units="flux"/>
      <variable name="k_m2" public_interface="in" units="nanomolar"/>
      <variable name="k_d2" public_interface="in" units="first_order_rate_constant"/>
      <variable name="k_c2" public_interface="in" units="first_order_rate_constant"/>
      <variable name="T_1" public_interface="in" units="nanomolar"/>
      <variable name="C_2" public_interface="in" units="nanomolar"/>
      <variable name="n" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>T_2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <ci>j_2</ci>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>v_d2</ci>
                        <apply>
                           <power/>
                           <ci>T_1</ci>
                           <ci>n</ci>
                        </apply>
                     </apply>
                     <apply>
                        <plus/>
                        <apply>
                           <power/>
                           <ci>k_m2</ci>
                           <ci>n</ci>
                        </apply>
                        <apply>
                           <power/>
                           <ci>T_1</ci>
                           <ci>n</ci>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k_c2</ci>
                     <ci>C_2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>k_d2</ci>
                  <ci>T_2</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="T_3">
      <variable cmeta:id="T_3_T_3" initial_value="1" name="T_3" public_interface="out" units="nanomolar"/>
      <variable name="v_d3" public_interface="in" units="flux"/>
      <variable name="j_3" public_interface="in" units="flux"/>
      <variable name="k_m3" public_interface="in" units="nanomolar"/>
      <variable name="k_d3" public_interface="in" units="first_order_rate_constant"/>
      <variable name="k_c3" public_interface="in" units="first_order_rate_constant"/>
      <variable name="T_2" public_interface="in" units="nanomolar"/>
      <variable name="C_3" public_interface="in" units="nanomolar"/>
      <variable name="n" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>T_3</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <ci>j_3</ci>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>v_d3</ci>
                        <apply>
                           <power/>
                           <ci>T_2</ci>
                           <ci>n</ci>
                        </apply>
                     </apply>
                     <apply>
                        <plus/>
                        <apply>
                           <power/>
                           <ci>k_m3</ci>
                           <ci>n</ci>
                        </apply>
                        <apply>
                           <power/>
                           <ci>T_2</ci>
                           <ci>n</ci>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k_c3</ci>
                     <ci>C_3</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>k_d3</ci>
                  <ci>T_3</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="C_1" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="C_2" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="C_3" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="T_1" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="T_2" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="T_3" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="C_1" component_2="parameters"/>
      <map_variables variable_1="v_12" variable_2="v_12"/>
      <map_variables variable_1="k_120" variable_2="k_120"/>
      <map_variables variable_1="k_d4" variable_2="k_d4"/>
      <map_variables variable_1="n" variable_2="n"/>
   </connection>
   <connection>
      <map_components component_1="C_1" component_2="C_2"/>
      <map_variables variable_1="C_2" variable_2="C_2"/>
   </connection>
   <connection>
      <map_components component_1="C_1" component_2="T_1"/>
      <map_variables variable_1="T_1" variable_2="T_1"/>
      <map_variables variable_1="C_1" variable_2="C_1"/>
   </connection>
   <connection>
      <map_components component_1="C_2" component_2="parameters"/>
      <map_variables variable_1="v_11" variable_2="v_11"/>
      <map_variables variable_1="k_110" variable_2="k_110"/>
      <map_variables variable_1="k_d5" variable_2="k_d5"/>
      <map_variables variable_1="n" variable_2="n"/>
   </connection>
   <connection>
      <map_components component_1="C_2" component_2="C_3"/>
      <map_variables variable_1="C_3" variable_2="C_3"/>
   </connection>
   <connection>
      <map_components component_1="C_2" component_2="T_2"/>
      <map_variables variable_1="T_2" variable_2="T_2"/>
      <map_variables variable_1="C_2" variable_2="C_2"/>
   </connection>
   <connection>
      <map_components component_1="C_3" component_2="parameters"/>
      <map_variables variable_1="v_10" variable_2="v_10"/>
      <map_variables variable_1="k_100" variable_2="k_100"/>
      <map_variables variable_1="k_d6" variable_2="k_d6"/>
      <map_variables variable_1="n" variable_2="n"/>
   </connection>
   <connection>
      <map_components component_1="C_3" component_2="C_1"/>
      <map_variables variable_1="C_1" variable_2="C_1"/>
   </connection>
   <connection>
      <map_components component_1="C_3" component_2="T_3"/>
      <map_variables variable_1="T_3" variable_2="T_3"/>
      <map_variables variable_1="C_3" variable_2="C_3"/>
   </connection>
   <connection>
      <map_components component_1="T_1" component_2="parameters"/>
      <map_variables variable_1="v_d1" variable_2="v_d1"/>
      <map_variables variable_1="j_1" variable_2="j_1"/>
      <map_variables variable_1="k_m1" variable_2="k_m1"/>
      <map_variables variable_1="k_d1" variable_2="k_d1"/>
      <map_variables variable_1="k_c1" variable_2="k_c1"/>
      <map_variables variable_1="n" variable_2="n"/>
   </connection>
   <connection>
      <map_components component_1="T_1" component_2="T_3"/>
      <map_variables variable_1="T_3" variable_2="T_3"/>
   </connection>
   <connection>
      <map_components component_1="T_2" component_2="parameters"/>
      <map_variables variable_1="v_d2" variable_2="v_d2"/>
      <map_variables variable_1="j_2" variable_2="j_2"/>
      <map_variables variable_1="k_m2" variable_2="k_m2"/>
      <map_variables variable_1="k_d2" variable_2="k_d2"/>
      <map_variables variable_1="k_c2" variable_2="k_c2"/>
      <map_variables variable_1="n" variable_2="n"/>
   </connection>
   <connection>
      <map_components component_1="T_2" component_2="T_1"/>
      <map_variables variable_1="T_1" variable_2="T_1"/>
   </connection>
   <connection>
      <map_components component_1="T_3" component_2="parameters"/>
      <map_variables variable_1="v_d3" variable_2="v_d3"/>
      <map_variables variable_1="j_3" variable_2="j_3"/>
      <map_variables variable_1="k_m3" variable_2="k_m3"/>
      <map_variables variable_1="k_d3" variable_2="k_d3"/>
      <map_variables variable_1="k_c3" variable_2="k_c3"/>
      <map_variables variable_1="n" variable_2="n"/>
   </connection>
   <connection>
      <map_components component_1="T_3" component_2="T_2"/>
      <map_variables variable_1="T_2" variable_2="T_2"/>
   </connection>

<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
<rdf:Description rdf:about="rdf:#e51b3d73-cf0d-4f05-b2a9-8457d6658a76">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#958a8fec-098d-4373-bd84-61120af8b309"/>
</creator>
<rdf:value xml:lang="en">This is the CellML description of Sriram et al's 2007 mathematical model combining several regulatory cycles from the budding yeast cell cycle </rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#d300d9b6-a71a-482f-8376-3dd22b8859f1">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#b7c2eb12-e11d-46df-93d8-4c83f5c6b019"/>
</creator>
<rdf:value xml:lang="en">This CellML version of the model has been checked in COR and PCEnv and the model runs to replicate the original published results as depicted in figure 12 of the paper. The units have been checked and are consistent.</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#837c2eaf-08a1-4f82-b865-c6d2bf6814ac">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#148a2611-1672-4117-a96b-044cbe0a68b4"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n1">
<pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">10000</pointDensity>
<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">500</endingValue>
</rdf:Description>
<rdf:Description rdf:about="rdf:#6523d3fb-b998-4ed4-a868-679b64b8b70a">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#64969b8e-8569-47de-a1b4-e8dcccc2e656"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#f90e2f23-4f47-4c45-82dc-42533b06f71b">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Jeelean</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lim</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en"></Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#64969b8e-8569-47de-a1b4-e8dcccc2e656">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Krishnamachari</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Sriram</Family>
</rdf:Description>
<rdf:Description rdf:nodeID="n2">
<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n3"/>
</boundIntervals>
</rdf:Description>
<rdf:Description rdf:about="rdf:#958a8fec-098d-4373-bd84-61120af8b309">
<FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Jeelean Lim</FN>
</rdf:Description>
<rdf:Description rdf:about="rdf:#ae6faff5-fb7d-479c-8325-890487866dea">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#f90e2f23-4f47-4c45-82dc-42533b06f71b"/>
</N>
<EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#d897576f-cc8c-47a4-af95-61f7e04bad8b"/>
</EMAIL>
<ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#2a0679c2-81cb-4e74-9f98-417ca3e1470b"/>
</ORG>
</rdf:Description>
<rdf:Description rdf:about="">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#ae6faff5-fb7d-479c-8325-890487866dea"/>
</creator>
<cmeta:comment>
<rdf:Description rdf:about="rdf:#d300d9b6-a71a-482f-8376-3dd22b8859f1"/>
</cmeta:comment>
<publisher xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en"></publisher>
<created xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#1e4b6d97-2f96-40c8-9d8c-0b5fcc030369"/>
</created>
</rdf:Description>
<rdf:Description rdf:about="rdf:#782f288f-b8ba-43ae-89a8-9d9dc1aa1b35">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">IET systems biology</title>
</rdf:Description>
<rdf:Description rdf:about="rdf:#ef91b1e5-9806-4d35-9028-cc3d19ef81da">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#3d57ddaf-26e7-4cf7-a1af-e8a7c21c3106"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n4">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/>
</rdf:type>
<rdf:_1 xml:lang="en">cell cycle</rdf:_1>
</rdf:Description>
<rdf:Description rdf:about="rdf:#d897576f-cc8c-47a4-af95-61f7e04bad8b">
<rdf:type>
<rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/>
</rdf:type>
<rdf:value xml:lang="en">jlim063@aucklanduni.ac.nz</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#148a2611-1672-4117-a96b-044cbe0a68b4">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">F</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Kepes</Family>
</rdf:Description>
<rdf:Description rdf:about="rdf:#1e4b6d97-2f96-40c8-9d8c-0b5fcc030369">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2009-02-11T00:00:00+00:00</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#2b57022a-023a-49f6-8f37-01bd3c856739">
<Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">18203579</Pubmed_id>
<JournalArticle xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#80271bd5-edbc-41f1-bf34-7c4d80ee7540"/>
</JournalArticle>
</rdf:Description>
<rdf:Description rdf:nodeID="n3">
<rdf:rest>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
</rdf:rest>
<rdf:first>
<rdf:Description rdf:nodeID="n1"/>
</rdf:first>
</rdf:Description>
<rdf:Description rdf:nodeID="n5">
<rdf:value>
<rdf:Description rdf:nodeID="n4"/>
</rdf:value>
<subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#80271bd5-edbc-41f1-bf34-7c4d80ee7540">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#2cbd5978-79cd-41c0-b9af-1d890145291c"/>
</creator>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">A minimal mathematical model combining several regulatory cycles from the budding yeast cell cycle</title>
<volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">1</volume>
<Journal xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#782f288f-b8ba-43ae-89a8-9d9dc1aa1b35"/>
</Journal>
<first_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">326</first_page>
<last_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">341</last_page>
<issued xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#0afa3a49-cfad-4c63-b511-89de3eef24f8"/>
</issued>
</rdf:Description>
<rdf:Description rdf:about="rdf:#3d57ddaf-26e7-4cf7-a1af-e8a7c21c3106">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">G</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Bernot</Family>
</rdf:Description>
<rdf:Description rdf:about="rdf:#0afa3a49-cfad-4c63-b511-89de3eef24f8">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2007-11-00 00:00</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#b7c2eb12-e11d-46df-93d8-4c83f5c6b019">
<FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Jeelean Lim</FN>
</rdf:Description>
<rdf:Description rdf:about="#sriram_bernot_kepes_2007_version01">
<cmeta:comment>
<rdf:Description rdf:about="rdf:#e51b3d73-cf0d-4f05-b2a9-8457d6658a76"/>
</cmeta:comment>
<simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n2"/>
</simulation>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n6"/>
</reference>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#2b57022a-023a-49f6-8f37-01bd3c856739"/>
</reference>
</rdf:Description>
<rdf:Description rdf:nodeID="n6">
<subject xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n5"/>
</subject>
</rdf:Description>
<rdf:Description rdf:about="rdf:#2cbd5978-79cd-41c0-b9af-1d890145291c">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
</rdf:type>
<rdf:_1>
<rdf:Description rdf:about="rdf:#6523d3fb-b998-4ed4-a868-679b64b8b70a"/>
</rdf:_1>
<rdf:_3>
<rdf:Description rdf:about="rdf:#837c2eaf-08a1-4f82-b865-c6d2bf6814ac"/>
</rdf:_3>
<rdf:_2>
<rdf:Description rdf:about="rdf:#ef91b1e5-9806-4d35-9028-cc3d19ef81da"/>
</rdf:_2>
</rdf:Description>
<rdf:Description rdf:about="rdf:#2a0679c2-81cb-4e74-9f98-417ca3e1470b">
<Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The University of Auckland</Orgname>
<Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Auckland Bioengineering Institute</Orgunit>
</rdf:Description>
</rdf:RDF>
</model>