//   FILE :  leloup_model_2003.xml
//
// CREATED :  22nd September 2003
//
// LAST MODIFIED : 14th August 2007
//
// AUTHOR :  Catherine Lloyd
//           Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Leloup and Goldbeter's 2003 mathematical model of the mammalian circadian clock.
//
// CHANGES:
// creator: Orgunit Auckland Bioengineering Institute; Orgname The University of Auckland; c.lloyd@auckland.ac.nz; Other May; Given Catherine; Family Lloyd
// publisher: The University of Auckland, Auckland Bioengineering Institute
// created: W3CDTF 2007-08-14T00:00:00+00:00
// modification: Added cmeta:id's to variables for PCEnv session; W3CDTF 2008-08-20T18:38:00+12:00; Other Richard; Given James; Family Lawson
// reference: _1 circadian rhythms; _2 CLOCK; _3 signal transduction; subject_type keyword
// reference: Pubmed_id 12775757; Given Jean-Christophe; Family Leloup; Given Albert; Family Goldbeter; title PNAS; first_page 7051; volume 100; W3CDTF 2003-06-10; title Toward a detailed computational model for the mammalian circadian clock; last_page 7056
// simulation: endingValue 100; pointDensity 10000
// title: Leloup and Goldbeter's 2004 mathematical model of the mammalian circadian clock.
// comment: This is a CellML description of Leloup and Goldbeter's 2004 mathematical model of the mammalian circadian clock.; FN Catherine Lloyd
def model leloup_2003 as
  // A Detailed Computational Model for the Mammalian Circadian Clock
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in OpenCell to recreate the published results (figure 2A from the published paper, where KAC = 0.6nM). The model needs to be run for 160 hours with a step size of 0.1 hours, and MP, MB and MC are plotted. Ignore the first couple of oscillations as the model needs to stabilise. Please note that the model presented here is the extended version of the model which includes equations to define the role of REV-ERB-alpha in inhibiting the transcription of Bmal1. There are 19 equations and the parameters are listed as part of the Supplementary data set under Figure 8.
  //
  // Model Structure
  //
  // ABSTRACT: We present a computational model for the mammalian circadian clock based on the intertwined positive and negative regulatory loops involving the Per, Cry, Bmal1, Clock, and Rev-Erb alpha genes. In agreement with experimental observations, the model can give rise to sustained circadian oscillations in continuous darkness, characterized by an antiphase relationship between Per/Cry/Rev-Erbalpha and Bmal1 mRNAs. Sustained oscillations correspond to the rhythms autonomously generated by suprachiasmatic nuclei. For other parameter values, damped oscillations can also be obtained in the model. These oscillations, which transform into sustained oscillations when coupled to a periodic signal, correspond to rhythms produced by peripheral tissues. When incorporating the light-induced expression of the Per gene, the model accounts for entrainment of the oscillations by light-dark cycles. Simulations show that the phase of the oscillations can then vary by several hours with relatively minor changes in parameter values. Such a lability of the phase could account for physiological disorders related to circadian rhythms in humans, such as advanced or delayed sleep phase syndrome, whereas the lack of entrainment by light-dark cycles can be related to the non-24h sleep-wake syndrome. The model uncovers the possible existence of multiple sources of oscillatory behavior. Thus, in conditions where the indirect negative autoregulation of Per and Cry expression is inoperative, the model indicates the possibility that sustained oscillations might still arise from the negative autoregulation of Bmal1 expression.
  //
  // The original paper reference is cited below:
  //
  // Toward a detailed computational model for the mammalian circadian clock, Jean-Christophe Leloup and Albert Goldbeter, 2003,PNAS, 100, 7051-7056. PubMed ID: 12775757 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=12775757&dopt=Abstract)
  //
  // reaction diagram
  //
  // Model for circadian oscillations in mammals involving interlocked negative and positive regulations of Per, Cry, Bmal1, and Rev-Erb genes by their protein products.
  def unit hour as
    unit second {mult: 3600.0};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit flux as
    unit nanomolar;
    unit hour {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit hour {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit nanomolar {expo: -1};
    unit hour {expo: -1};
  enddef;

  def comp environment as
    var time: hour {pub: out};
  enddef;

  // alternative: Per mRNA
  // title: MP
  def comp MP as
    var MP: nanomolar {init: 0.1, pub: out};
    var vsP: flux {init: 2.4};
    var vmP: flux {init: 2.2};
    var kdmp: first_order_rate_constant {init: 0.02};
    var KAP: nanomolar {init: 0.6};
    var KmP: nanomolar {init: 0.3};
    var n: dimensionless {pub: in};
    var BN: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(MP, time) = vsP*(pow(BN, n)/(pow(KAP, n)+pow(BN, n)))-(vmP*(MP/(KmP+MP))+kdmp*MP);
  enddef;

  // alternative: Cry mRNA
  // title: MC
  def comp MC as
    var MC: nanomolar {init: 1.2, pub: out};
    var vsC: flux {init: 2.2};
    var vmC: flux {init: 2.0};
    var kdmc: first_order_rate_constant {init: 0.02};
    var KAC: nanomolar {init: 0.6};
    var KmC: nanomolar {init: 0.4};
    var n: dimensionless {pub: in};
    var BN: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(MC, time) = vsC*(pow(BN, n)/(pow(KAC, n)+pow(BN, n)))-(vmC*(MC/(KmC+MC))+kdmc*MC);
  enddef;

  // alternative: Bmal1 mRNA
  // title: MB
  def comp MB as
    var MB: nanomolar {init: 9, pub: out};
    var vsB: flux {init: 1.8};
    var vmB: flux {init: 1.3};
    var kdmb: first_order_rate_constant {init: 0.02};
    var KIB: nanomolar {init: 2.2};
    var KmB: nanomolar {init: 0.4};
    var m: dimensionless {pub: in};
    var RN: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(MB, time) = vsB*(pow(KIB, m)/(pow(KIB, m)+pow(RN, m)))-(vmB*(MB/(KmB+MB))+kdmb*MB);
  enddef;

  // alternative: Rev-Erb
  // title: MR
  def comp MR as
    var MR: nanomolar {init: 1.5, pub: out};
    var vsR: flux {init: 1.6};
    var vmR: flux {init: 1.6};
    var kdmr: first_order_rate_constant {init: 0.02};
    var KAR: nanomolar {init: 0.6};
    var KmR: nanomolar {init: 0.4};
    var h: dimensionless {pub: in};
    var BN: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(MR, time) = vsR*(pow(BN, h)/(pow(KAR, h)+pow(BN, h)))-(vmR*(MR/(KmR+MR))+kdmr*MR);
  enddef;

  // alternative: cytosolic non-phosphorylated PER protein
  // title: PC
  def comp PC as
    var PC: nanomolar {init: 0.1, pub: out};
    var ksP: first_order_rate_constant {pub: in};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var k3: second_order_rate_constant {pub: in};
    var k4: first_order_rate_constant {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V1P: flux {pub: in};
    var V2P: flux {pub: in};
    var PCP: nanomolar {pub: in};
    var PCC: nanomolar {pub: in};
    var CC: nanomolar {pub: in};
    var MP: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(PC, time) = ksP*MP+V2P*(PCP/(Kdp+PCP))+k4*PCC-(V1P*(PC/(Kp+PC))+k3*PC*CC+kdn*PC);
  enddef;

  // alternative: cytosolic non-phosphorylated CRY protein
  // title: CC
  def comp CC as
    var CC: nanomolar {init: 0.1, pub: out};
    var ksC: first_order_rate_constant {pub: in};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var k3: second_order_rate_constant {pub: in};
    var k4: first_order_rate_constant {pub: in};
    var kdnc: first_order_rate_constant {pub: in};
    var V1C: flux {pub: in};
    var V2C: flux {pub: in};
    var CCP: nanomolar {pub: in};
    var PC: nanomolar {pub: in};
    var PCC: nanomolar {pub: in};
    var MC: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(CC, time) = ksC*MC+V2C*(CCP/(Kdp+CCP))+k4*PCC-(V1C*(CC/(Kp+CC))+k3*PC*CC+kdnc*CC);
  enddef;

  // alternative: cytosolic non-phosphorylated REV-ERB
  // title: RC
  def comp RC as
    var RC: nanomolar {init: 0.1, pub: out};
    var ksR: first_order_rate_constant {pub: in};
    var Kd: nanomolar {pub: in};
    var k9: first_order_rate_constant {pub: in};
    var k10: first_order_rate_constant {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var vdRC: flux {pub: in};
    var RN: nanomolar {pub: in};
    var MR: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(RC, time) = ksR*MR+k10*RN-(k9*RC+vdRC*(RC/(Kd+RC))+kdn*RC);
  enddef;

  // alternative: cytosolic phosphorylated PER protein
  // title: PCP
  def comp PCP as
    var PCP: nanomolar {init: 0.1, pub: out};
    var vdPC: flux {pub: in};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var Kd: nanomolar {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V1P: flux {pub: in};
    var V2P: flux {pub: in};
    var PC: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(PCP, time) = V1P*(PC/(Kp+PC))-(V2P*(PCP/(Kdp+PCP))+vdPC*(PCP/(Kd+PCP))+kdn*PCP);
  enddef;

  // alternative: cytosolic phosphorylated CRY protein
  // title: CCP
  def comp CCP as
    var CCP: nanomolar {init: 0.1, pub: out};
    var vdCC: flux {pub: in};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var Kd: nanomolar {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V1C: flux {pub: in};
    var V2C: flux {pub: in};
    var CC: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(CCP, time) = V1C*(CC/(Kp+CC))-(V2C*(CCP/(Kdp+CCP))+vdCC*(CCP/(Kd+CCP))+kdn*CCP);
  enddef;

  // alternative: cytosolic non-phosphorylated PER-CRY protein complex
  // title: PCC
  def comp PCC as
    var PCC: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var k1: first_order_rate_constant {pub: in};
    var k2: first_order_rate_constant {pub: in};
    var k3: second_order_rate_constant {pub: in};
    var k4: first_order_rate_constant {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V1PC: flux {pub: in};
    var V2PC: flux {pub: in};
    var PCCP: nanomolar {pub: in};
    var PCN: nanomolar {pub: in};
    var PC: nanomolar {pub: in};
    var CC: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(PCC, time) = V2PC*(PCCP/(Kdp+PCCP))+k3*PC*CC+k2*PCN-(V1PC*(PCC/(Kp+PCC))+k4*PCC+k1*PCC+kdn*PCC);
  enddef;

  // alternative: nuclear non-phosphorylated PER-CRY protein complex
  // alternative: nuclear non-phosphorylated BMAL1 protein
  // title: BN
  // title: PCN
  def comp PCN as
    var PCN: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var k1: first_order_rate_constant {pub: in};
    var k2: first_order_rate_constant {pub: in};
    var k7: second_order_rate_constant {pub: in};
    var k8: first_order_rate_constant {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V3PC: flux {pub: in};
    var V4PC: flux {pub: in};
    var PCNP: nanomolar {pub: in};
    var PCC: nanomolar {pub: in};
    var BN: nanomolar {pub: in};
    var IN: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(PCN, time) = V4PC*(PCNP/(Kdp+PCNP))+k1*PCC+k8*IN-(V3PC*(PCN/(Kp+PCN))+k2*PCN+k7*BN*PCN+kdn*PCN);
  enddef;

  // alternative: nuclear non-phosphorylated REV-ERB
  // title: RN
  def comp RN as
    var RN: nanomolar {init: 0.1, pub: out};
    var Kd: nanomolar {pub: in};
    var k9: first_order_rate_constant {pub: in};
    var k10: first_order_rate_constant {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var vdRN: flux {pub: in};
    var RC: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(RN, time) = k9*RC-(k10*RN+vdRN*(RN/(Kd+RN))+kdn*RN);
  enddef;

  // alternative: cytosolic phosphorylated PER-CRY protein complex
  // title: PCCP
  def comp PCCP as
    var PCCP: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var Kd: nanomolar {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V1PC: flux {pub: in};
    var V2PC: flux {pub: in};
    var vdPCC: flux {pub: in};
    var PCC: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(PCCP, time) = V1PC*(PCC/(Kp+PCC))-(V2PC*(PCCP/(Kdp+PCCP))+vdPCC*(PCCP/(Kd+PCCP))+kdn*PCCP);
  enddef;

  // alternative: nuclear phosphorylated PER-CRY protein complex
  // title: PCNP
  def comp PCNP as
    var PCNP: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var Kd: nanomolar {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V3PC: flux {pub: in};
    var V4PC: flux {pub: in};
    var vdPCN: flux {pub: in};
    var PCN: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(PCNP, time) = V3PC*(PCN/(Kp+PCN))-(V4PC*(PCNP/(Kdp+PCNP))+vdPCN*(PCNP/(Kd+PCNP))+kdn*PCNP);
  enddef;

  // alternative: cytosolic non-phosphorylated BMAL1 protein
  // title: BC
  def comp BC as
    var BC: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var ksB: first_order_rate_constant {pub: in};
    var k5: first_order_rate_constant {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V1B: flux {pub: in};
    var V2B: flux {pub: in};
    var MB: nanomolar {pub: in};
    var BCP: nanomolar {pub: in};
    var BN: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(BC, time) = V2B*(BCP/(Kdp+BCP))+k6*BN+ksB*MB-(V1B*(BC/(Kp+BC))+k5*BC+kdn*BC);
  enddef;

  // alternative: cytosolic phosphorylated BMAL1 protein
  // title: BCP
  def comp BCP as
    var BCP: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var Kd: nanomolar {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V1B: flux {pub: in};
    var V2B: flux {pub: in};
    var vdBC: flux {pub: in};
    var BC: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(BCP, time) = V1B*(BC/(Kp+BC))-(V2B*(BCP/(Kdp+BCP))+vdBC*(BCP/(Kd+BCP))+kdn*BCP);
  enddef;

  def comp BN as
    var BN: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var k5: first_order_rate_constant {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var k7: second_order_rate_constant {pub: in};
    var k8: first_order_rate_constant {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V3B: flux {pub: in};
    var V4B: flux {pub: in};
    var BNP: nanomolar {pub: in};
    var BC: nanomolar {pub: in};
    var PCN: nanomolar {pub: in};
    var IN: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(BN, time) = V4B*(BNP/(Kdp+BNP))+k5*BC+k8*IN-(V3B*(BN/(Kp+BN))+k6*BN+k7*BN*PCN+kdn*BN);
  enddef;

  // alternative: nuclear phosphorylated BMAL1 protein
  // title: BNP
  def comp BNP as
    var BNP: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var Kd: nanomolar {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V3B: flux {pub: in};
    var V4B: flux {pub: in};
    var vdBN: flux {pub: in};
    var BN: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(BNP, time) = V3B*(BN/(Kp+BN))-(V4B*(BNP/(Kdp+BNP))+vdBN*(BNP/(Kd+BNP))+kdn*BNP);
  enddef;

  // alternative: nuclear inactive complex between PER-CRY and CLOCK-BMAL1
  // title: IN
  def comp IN as
    var IN: nanomolar {init: 0.1, pub: out};
    var Kd: nanomolar {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var k7: second_order_rate_constant {pub: in};
    var k8: first_order_rate_constant {pub: in};
    var vdIN: flux {pub: in};
    var PCN: nanomolar {pub: in};
    var BN: nanomolar {pub: in};
    var time: hour {pub: in};
    ode(IN, time) = k7*BN*PCN-(k8*IN+vdIN*(IN/(Kd+IN))+kdn*IN);
  enddef;

  def comp model_parameters as
    var k1: first_order_rate_constant {init: 0.8, pub: out};
    var k2: first_order_rate_constant {init: 0.4, pub: out};
    var k3: second_order_rate_constant {init: 0.8, pub: out};
    var k4: first_order_rate_constant {init: 0.4, pub: out};
    var k5: first_order_rate_constant {init: 0.8, pub: out};
    var k6: first_order_rate_constant {init: 0.4, pub: out};
    var k7: second_order_rate_constant {init: 1.0, pub: out};
    var k8: first_order_rate_constant {init: 0.2, pub: out};
    var k9: first_order_rate_constant {init: 0.8, pub: out};
    var k10: first_order_rate_constant {init: 0.4, pub: out};
    var kdnc: first_order_rate_constant {init: 0.02, pub: out};
    var kdn: first_order_rate_constant {init: 0.02, pub: out};
    var ksB: first_order_rate_constant {init: 0.32, pub: out};
    var ksC: first_order_rate_constant {init: 3.2, pub: out};
    var ksP: first_order_rate_constant {init: 1.2, pub: out};
    var ksR: first_order_rate_constant {init: 1.7, pub: out};
    var m: dimensionless {init: 2.0, pub: out};
    var n: dimensionless {init: 2.0, pub: out};
    var h: dimensionless {init: 2.0, pub: out};
    var Kd: nanomolar {init: 0.3, pub: out};
    var Kdp: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {init: 1.006, pub: out};
    var V1B: flux {init: 1.4, pub: out};
    var V1C: flux {init: 1.2, pub: out};
    var V1P: flux {init: 9.6, pub: out};
    var V1PC: flux {init: 2.4, pub: out};
    var V2B: flux {init: 0.2, pub: out};
    var V2C: flux {init: 0.2, pub: out};
    var V2P: flux {init: 0.6, pub: out};
    var V2PC: flux {init: 0.2, pub: out};
    var V3B: flux {init: 1.4, pub: out};
    var V3PC: flux {init: 2.4, pub: out};
    var V4B: flux {init: 0.4, pub: out};
    var V4PC: flux {init: 0.2, pub: out};
    var vdBC: flux {init: 3.0, pub: out};
    var vdBN: flux {init: 3.0, pub: out};
    var vdCC: flux {init: 1.4, pub: out};
    var vdIN: flux {init: 1.6, pub: out};
    var vdPC: flux {init: 3.4, pub: out};
    var vdPCC: flux {init: 1.4, pub: out};
    var vdPCN: flux {init: 1.4, pub: out};
    var vdRC: flux {init: 4.4, pub: out};
    var vdRN: flux {init: 0.8, pub: out};
  enddef;
  def map between MP and environment for
    vars time and time;
  enddef;
  def map between MC and environment for
    vars time and time;
  enddef;
  def map between MB and environment for
    vars time and time;
  enddef;
  def map between MR and environment for
    vars time and time;
  enddef;
  def map between RC and environment for
    vars time and time;
  enddef;
  def map between PC and environment for
    vars time and time;
  enddef;
  def map between CC and environment for
    vars time and time;
  enddef;
  def map between PCP and environment for
    vars time and time;
  enddef;
  def map between CCP and environment for
    vars time and time;
  enddef;
  def map between PCC and environment for
    vars time and time;
  enddef;
  def map between PCN and environment for
    vars time and time;
  enddef;
  def map between RN and environment for
    vars time and time;
  enddef;
  def map between PCCP and environment for
    vars time and time;
  enddef;
  def map between PCNP and environment for
    vars time and time;
  enddef;
  def map between BC and environment for
    vars time and time;
  enddef;
  def map between BCP and environment for
    vars time and time;
  enddef;
  def map between BN and environment for
    vars time and time;
  enddef;
  def map between BNP and environment for
    vars time and time;
  enddef;
  def map between IN and environment for
    vars time and time;
  enddef;
  def map between MP and BN for
    vars BN and BN;
  enddef;
  def map between MP and model_parameters for
    vars n and n;
  enddef;
  def map between MC and BN for
    vars BN and BN;
  enddef;
  def map between MR and BN for
    vars BN and BN;
  enddef;
  def map between MC and model_parameters for
    vars n and n;
  enddef;
  def map between MR and model_parameters for
    vars h and h;
  enddef;
  def map between MB and RN for
    vars RN and RN;
  enddef;
  def map between MB and model_parameters for
    vars m and m;
  enddef;
  def map between PC and MP for
    vars MP and MP;
  enddef;
  def map between PC and PCP for
    vars PC and PC;
    vars PCP and PCP;
  enddef;
  def map between PC and PCC for
    vars PC and PC;
    vars PCC and PCC;
  enddef;
  def map between PC and CC for
    vars PC and PC;
    vars CC and CC;
  enddef;
  def map between PC and model_parameters for
    vars ksP and ksP;
    vars V1P and V1P;
    vars V2P and V2P;
    vars Kp and Kp;
    vars Kdp and Kdp;
    vars k3 and k3;
    vars k4 and k4;
    vars kdn and kdn;
  enddef;
  def map between CC and MC for
    vars MC and MC;
  enddef;
  def map between CC and CCP for
    vars CC and CC;
    vars CCP and CCP;
  enddef;
  def map between CC and PCC for
    vars CC and CC;
    vars PCC and PCC;
  enddef;
  def map between CC and model_parameters for
    vars ksC and ksC;
    vars V1C and V1C;
    vars V2C and V2C;
    vars Kp and Kp;
    vars Kdp and Kdp;
    vars k3 and k3;
    vars k4 and k4;
    vars kdnc and kdnc;
  enddef;
  def map between PCP and model_parameters for
    vars Kd and Kd;
    vars V1P and V1P;
    vars V2P and V2P;
    vars Kp and Kp;
    vars Kdp and Kdp;
    vars vdPC and vdPC;
    vars kdn and kdn;
  enddef;
  def map between CCP and model_parameters for
    vars Kd and Kd;
    vars V1C and V1C;
    vars V2C and V2C;
    vars Kp and Kp;
    vars Kdp and Kdp;
    vars vdCC and vdCC;
    vars kdn and kdn;
  enddef;
  def map between PCC and PCCP for
    vars PCC and PCC;
    vars PCCP and PCCP;
  enddef;
  def map between PCC and PCN for
    vars PCC and PCC;
    vars PCN and PCN;
  enddef;
  def map between PCC and model_parameters for
    vars k1 and k1;
    vars k2 and k2;
    vars V1PC and V1PC;
    vars V2PC and V2PC;
    vars Kp and Kp;
    vars Kdp and Kdp;
    vars k3 and k3;
    vars k4 and k4;
    vars kdn and kdn;
  enddef;
  def map between PCN and BN for
    vars PCN and PCN;
    vars BN and BN;
  enddef;
  def map between PCN and IN for
    vars PCN and PCN;
    vars IN and IN;
  enddef;
  def map between PCNP and PCN for
    vars PCNP and PCNP;
    vars PCN and PCN;
  enddef;
  def map between PCN and model_parameters for
    vars k1 and k1;
    vars k2 and k2;
    vars V3PC and V3PC;
    vars V4PC and V4PC;
    vars Kp and Kp;
    vars Kdp and Kdp;
    vars k7 and k7;
    vars k8 and k8;
    vars kdn and kdn;
  enddef;
  def map between PCCP and model_parameters for
    vars Kd and Kd;
    vars V1PC and V1PC;
    vars V2PC and V2PC;
    vars Kp and Kp;
    vars Kdp and Kdp;
    vars vdPCC and vdPCC;
    vars kdn and kdn;
  enddef;
  def map between PCNP and model_parameters for
    vars Kd and Kd;
    vars V3PC and V3PC;
    vars V4PC and V4PC;
    vars Kp and Kp;
    vars Kdp and Kdp;
    vars vdPCN and vdPCN;
    vars kdn and kdn;
  enddef;
  def map between BC and MB for
    vars MB and MB;
  enddef;
  def map between BC and BCP for
    vars BC and BC;
    vars BCP and BCP;
  enddef;
  def map between BC and BN for
    vars BC and BC;
    vars BN and BN;
  enddef;
  def map between BC and model_parameters for
    vars ksB and ksB;
    vars V1B and V1B;
    vars V2B and V2B;
    vars Kp and Kp;
    vars Kdp and Kdp;
    vars k5 and k5;
    vars k6 and k6;
    vars kdn and kdn;
  enddef;
  def map between BCP and model_parameters for
    vars Kd and Kd;
    vars V1B and V1B;
    vars V2B and V2B;
    vars Kp and Kp;
    vars Kdp and Kdp;
    vars vdBC and vdBC;
    vars kdn and kdn;
  enddef;
  def map between BN and BNP for
    vars BN and BN;
    vars BNP and BNP;
  enddef;
  def map between IN and BN for
    vars IN and IN;
    vars BN and BN;
  enddef;
  def map between BN and model_parameters for
    vars k7 and k7;
    vars k8 and k8;
    vars V3B and V3B;
    vars V4B and V4B;
    vars Kp and Kp;
    vars Kdp and Kdp;
    vars k5 and k5;
    vars k6 and k6;
    vars kdn and kdn;
  enddef;
  def map between BNP and model_parameters for
    vars Kd and Kd;
    vars V3B and V3B;
    vars V4B and V4B;
    vars Kp and Kp;
    vars Kdp and Kdp;
    vars vdBN and vdBN;
    vars kdn and kdn;
  enddef;
  def map between IN and model_parameters for
    vars k7 and k7;
    vars k8 and k8;
    vars Kd and Kd;
    vars vdIN and vdIN;
    vars kdn and kdn;
  enddef;
  def map between RC and RN for
    vars RN and RN;
    vars RC and RC;
  enddef;
  def map between RC and MR for
    vars MR and MR;
  enddef;
  def map between RC and model_parameters for
    vars k9 and k9;
    vars k10 and k10;
    vars Kd and Kd;
    vars vdRC and vdRC;
    vars kdn and kdn;
    vars ksR and ksR;
  enddef;
  def map between RN and model_parameters for
    vars k9 and k9;
    vars k10 and k10;
    vars Kd and Kd;
    vars vdRN and vdRN;
    vars kdn and kdn;
  enddef;
enddef;
