// This CellML file was generated on 10.02.2012 at 13:45:07 using:
//
// COR (0.9.31.1409)
// Copyright 2002-2012 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// creator: Family Sulman; Given Tatiana; Orgname Ural Division of the Russian Academy of Sciences.; Orgunit Mathematical Physilogy Lab, Institute of Immunology and Physiology
// title: Mathematical modeling of mechanically modulated rhythm disturbances in homogeneous and heterogeneous myocardium with attenuated activity of na+-k+ pump
// reference: subject_type keyword; cardiac; electrophysiology
// reference: Pubmed_id 18259823; Family Sulman; Given Tatiana; Family Katnelson; Given Leonid; Other B; Family Solovyova; Given Olga; Family Markhasin; Given Vladimir; Other S; title Mathematical modeling of mechanically modulated rhythm disturbances in homogeneous and heterogeneous myocardium with attenuated activity of na+-k+ pump; title Bulletin of Mathematical Biology; volume 70; first_page 910; last_page 949
def model ekaterinburg_rat as
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_second2 as
    unit second {expo: -2};
  enddef;
  def unit micrometre_per_second as
    unit micrometre;
    unit per_second;
  enddef;
  def unit micrometre_per_second2 as
    unit micrometre;
    unit per_second2;
  enddef;
  def unit second_per_micrometre as
    unit second;
    unit per_micrometre;
  enddef;
  def unit millinewton as
    unit newton {pref: milli};
  enddef;
  def unit millinewton_per_second as
    unit millinewton;
    unit per_second;
  enddef;
  def unit millinewton_second_per_micrometre as
    unit millinewton;
    unit second_per_micrometre;
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit per_micrometre as
    unit micrometre {expo: -1};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit mA_nA as
    unit ampere {pref: milli};
    unit nanoA {expo: -1};
  enddef;
  def unit nanoA_per_millimolar as
    unit ampere {pref: nano};
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {pref: kilo, expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit micrometre3 as
    unit metre {pref: micro, expo: 3};
  enddef;
  def unit litre_micrometre3 as
    unit litre;
    unit micrometre3 {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp parameters as
    var isotonic: dimensionless {init: 0, pub: out};
    var alpha_1: per_micrometre {init: 14.6, pub: out};
    var beta_1: millinewton {init: 0.84, pub: out};
    var alpha_2: per_micrometre {init: 14.6, pub: out};
    var beta_2: millinewton {init: 0.0018, pub: out};
    var alpha_3: per_micrometre {init: 48, pub: out};
    var beta_3: millinewton {init: 0.015, pub: out};
    var lambda: millinewton {init: 30, pub: out};
    var mu: dimensionless {init: 3, pub: out};
    var k_mu: dimensionless {init: 0.6, pub: out};
    var kappa: dimensionless {init: 0.705, pub: out};
    var kappa_0: dimensionless {init: 3, pub: out};
    var m_0: dimensionless {init: 0.9, pub: out};
    var v_max: micrometre_per_second {init: 5.5, pub: out};
    var a: dimensionless {init: 0.25, pub: out};
    var d_h: dimensionless {init: 0.5, pub: out};
    var alpha_P: dimensionless {init: 4, pub: out};
  enddef;

  def comp isotonic as
    var isotonic: dimensionless {pub: in};
    var l: micrometre {pub: in};
    var F_muscle: millinewton {pub: in};
    var F_afterload: millinewton {init: 2};
    var isotonic_mode: dimensionless {pub: out};
    var l_0: micrometre {pub: in};
    var stim_period: second {pub: in};
    isotonic_mode = sel
      case (isotonic == 1{dimensionless}) and (F_muscle > F_afterload) and (l <= l_0*(1{dimensionless}+1e-4{dimensionless})):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
  enddef;

  def comp parameters_izakov_et_al_1991 as
    var S_0: micrometre {init: 1.14, pub: out};
    var q_v: per_second {pub: out};
    var q_1: per_second {init: 17.3};
    var q_2: per_second {init: 259};
    var q_3: per_second {init: 17.3};
    var q_4: per_second {init: 15, pub: out};
    var x_st: dimensionless {init: 0.964285};
    var v_st: micrometre_per_second {pub: out};
    var v_1: micrometre_per_second {pub: out};
    var alpha_G: dimensionless {init: 1, pub: out};
    var k_A: per_millimolar {init: 40, pub: out};
    var v: micrometre_per_second {pub: in};
    var v_max: micrometre_per_second {pub: in};
    var alpha_Q: dimensionless {init: 10};
    var beta_Q: dimensionless {init: 5};
    v_st = x_st*v_max;
    q_v = sel
      case v <= 0{micrometre_per_second}:
        q_1-q_2*v/v_max;
      case (v <= v_st) and (0{micrometre_per_second} < v):
        (q_4-q_3)*v/v_st+q_3;
      otherwise:
        q_4/pow(1{dimensionless}+beta_Q*(v-v_st)/v_max, alpha_Q);
    endsel;
    v_1 = v_max/10{dimensionless};
  enddef;

  def comp force as
    var F_CE: millinewton;
    var F_muscle: millinewton {pub: out};
    var F_XSE: millinewton;
    var F_SE: millinewton;
    var F_PE: millinewton;
    var N: dimensionless {pub: in};
    var k_P_vis: millinewton_second_per_micrometre {pub: in};
    var k_S_vis: millinewton_second_per_micrometre {pub: in};
    var w: micrometre_per_second {pub: in};
    var v: micrometre_per_second {pub: in};
    var l_1: micrometre {pub: in};
    var l_2: micrometre {pub: in};
    var l_3: micrometre {pub: in};
    var p_v: dimensionless {pub: in};
    var alpha_1: per_micrometre {pub: in};
    var beta_1: millinewton {pub: in};
    var alpha_2: per_micrometre {pub: in};
    var beta_2: millinewton {pub: in};
    var alpha_3: per_micrometre {pub: in};
    var beta_3: millinewton {pub: in};
    var lambda: millinewton {pub: in};
    F_CE = lambda*p_v*N;
    F_muscle = F_XSE;
    F_SE = beta_1*(exp(alpha_1*(l_2-l_1))-1{dimensionless});
    F_PE = beta_2*(exp(alpha_2*l_2)-1{dimensionless});
    F_XSE = beta_3*(exp(alpha_3*l_3)-1{dimensionless});
  enddef;

  def comp crossbridge_kinetics as
    var N: dimensionless {init: 7.455e-8, pub: out};
    var K_kappa: per_second {pub: out};
    var M_A: dimensionless;
    var n_1: dimensionless;
    var L_oz: dimensionless {pub: out};
    var k_p_v: per_second;
    var k_m_v: per_second;
    var time: second {pub: in};
    var A: millimolar {pub: in};
    var l_1: micrometre {pub: in};
    var A_tot: millimolar {pub: in};
    var mu: dimensionless {pub: in};
    var k_mu: dimensionless {pub: in};
    var kappa: dimensionless {pub: in};
    var kappa_0: dimensionless {pub: in};
    var m_0: dimensionless {pub: in};
    var S_0: micrometre {pub: in};
    var q_v: per_second {pub: in};
    var v: micrometre_per_second {pub: in};
    var v_st: micrometre_per_second {pub: in};
    var G_star: dimensionless {pub: in};
    var P_star: dimensionless {pub: in};
    var q_4: per_second {pub: in};
    var g_1: per_micrometre {init: 0.6};
    var g_2: dimensionless {init: 0.52};
    M_A = pow(A/A_tot, mu)*(1{dimensionless}+pow(k_mu, mu))/(pow(A/A_tot, mu)+pow(k_mu, mu));
    n_1 = sel
      case g_1*l_1+g_2 < 0{dimensionless}:
        0{dimensionless};
      case g_1*l_1+g_2 < 1{dimensionless}:
        g_1*l_1+g_2;
      otherwise:
        1{dimensionless};
    endsel;
    L_oz = sel
      case l_1 > 0.55{micrometre}:
        (l_1+S_0)/(0.46{micrometre}+S_0);
      otherwise:
        (S_0+0.55{micrometre})*1{per_micrometre};
    endsel;
    k_p_v = kappa*kappa_0*q_v*m_0*G_star;
    k_m_v = kappa_0*q_v*(1{dimensionless}-kappa*m_0*G_star);
    K_kappa = k_p_v*M_A*n_1*L_oz*(1{dimensionless}-N)-k_m_v*N;
    ode(N, time) = K_kappa;
  enddef;

  def comp length as
    var dl_1_dt: micrometre_per_second {pub: out};
    var l_1: micrometre {init: 0.436333342969918, pub: out};
    var dl_2_dt: micrometre_per_second {pub: out};
    var l_2: micrometre {init: 0.436333525334166, pub: out};
    var dl_3_dt: micrometre_per_second;
    var l_3: micrometre {init: 0.088805830771694, pub: out};
    var time: second {pub: in};
    var isotonic_mode: dimensionless {pub: in};
    var v: micrometre_per_second {pub: in};
    var w: micrometre_per_second {pub: in};
    var l: micrometre {pub: out};
    var k_S_vis: millinewton_second_per_micrometre {pub: in};
    var phi_chi_2: micrometre_per_second {pub: in};
    var stim_start: second {pub: in};
    var stim_end: second {pub: in};
    var stim_period: second {pub: in};
    var stim_duration: second {pub: in};
    var stim_amplitude: nanoA {pub: in};
    var l_0: micrometre {init: 0.525139356105856, pub: out};
    l = l_2+l_3;
    dl_1_dt = v;
    ode(l_1, time) = dl_1_dt;
    dl_2_dt = sel
      case k_S_vis == 0{millinewton_second_per_micrometre}:
        phi_chi_2;
      otherwise:
        w;
    endsel;
    ode(l_2, time) = dl_2_dt;
    dl_3_dt = sel
      case isotonic_mode == 1{dimensionless}:
        0{micrometre_per_second};
      case (isotonic_mode == 0{dimensionless}) and (k_S_vis == 0{millinewton_second_per_micrometre}):
        -phi_chi_2;
      case (isotonic_mode == 0{dimensionless}) and (k_S_vis <> 0{millinewton_second_per_micrometre}):
        -w;
    endsel;
    ode(l_3, time) = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        -(l_2+l_3-l_0)/stim_duration;
      otherwise:
        dl_3_dt;
    endsel;
  enddef;

  def comp CE_velocity as
    var v: micrometre_per_second {init: 0, pub: out};
    var phi_chi: micrometre_per_second2 {pub: out};
    var phi_chi_2: micrometre_per_second {pub: out};
    var k_P_vis: millinewton_second_per_micrometre {pub: out};
    var k_S_vis: millinewton_second_per_micrometre {pub: in};
    var time: second {pub: in};
    var w: micrometre_per_second {pub: in};
    var K_kappa: per_second {pub: in};
    var N: dimensionless {pub: in};
    var l_1: micrometre {pub: in};
    var dl_1_dt: micrometre_per_second {pub: in};
    var l_2: micrometre {pub: in};
    var l_3: micrometre {pub: in};
    var alpha_1: per_micrometre {pub: in};
    var beta_1: millinewton {pub: in};
    var alpha_2: per_micrometre {pub: in};
    var beta_2: millinewton {pub: in};
    var alpha_3: per_micrometre {pub: in};
    var beta_3: millinewton {pub: in};
    var lambda: millinewton {pub: in};
    var isotonic_mode: dimensionless {pub: in};
    var p_v: dimensionless {pub: in};
    var p_prime_v: second_per_micrometre {pub: in};
    var alpha_P_lengthening: per_micrometre {init: 16};
    var beta_P_lengthening: millinewton_second_per_micrometre {init: 0.0015};
    var alpha_P_shortening: per_micrometre {init: 16};
    var beta_P_shortening: millinewton_second_per_micrometre {init: 0.0015};
    var alp_p: per_micrometre;
    alp_p = sel
      case v <= 0{micrometre_per_second}:
        alpha_P_lengthening;
      otherwise:
        alpha_P_shortening;
    endsel;
    k_P_vis = sel
      case v <= 0{micrometre_per_second}:
        beta_P_lengthening*exp(alpha_P_lengthening*l_1);
      otherwise:
        beta_P_shortening*exp(alpha_P_shortening*l_1);
    endsel;
    phi_chi = sel
      case isotonic_mode == 1{dimensionless}:
        -(lambda*K_kappa*p_v+alp_p*k_P_vis*sqr(v)+alpha_2*beta_2*exp(alpha_2*l_2)*w)/(lambda*N*p_prime_v+k_P_vis);
      otherwise:
        -(lambda*K_kappa*p_v+alp_p*k_P_vis*sqr(v)+(alpha_2*beta_2*exp(alpha_2*l_2)+alpha_3*beta_3*exp(alpha_3*l_3))*w)/(lambda*N*p_prime_v+k_P_vis);
    endsel;
    phi_chi_2 = sel
      case isotonic_mode == 1{dimensionless}:
        alpha_1*beta_1*exp(alpha_1*(l_2-l_1))*v/(alpha_1*beta_1*exp(alpha_1*(l_2-l_1))+alpha_2*beta_2*exp(alpha_2*l_2));
      otherwise:
        alpha_1*beta_1*exp(alpha_1*(l_2-l_1))*v/(alpha_1*beta_1*exp(alpha_1*(l_2-l_1))+alpha_2*beta_2*exp(alpha_2*l_2)+alpha_3*beta_3*exp(alpha_3*l_3));
    endsel;
    ode(v, time) = sel
      case k_S_vis == 0{millinewton_second_per_micrometre}:
        (alpha_1*beta_1*exp(alpha_1*(l_2-l_1))*(phi_chi_2-v)-(lambda*K_kappa*p_v+alp_p*k_P_vis*sqr(v)))/(lambda*N*p_prime_v+k_P_vis);
      otherwise:
        phi_chi;
    endsel;
  enddef;

  def comp PE_velocity as
    var w: micrometre_per_second {init: 0, pub: out};
    var k_S_vis: millinewton_second_per_micrometre {pub: out};
    var time: second {pub: in};
    var v: micrometre_per_second {pub: in};
    var phi_chi: micrometre_per_second2 {pub: in};
    var l_1: micrometre {pub: in};
    var dl_1_dt: micrometre_per_second {pub: in};
    var l_2: micrometre {pub: in};
    var dl_2_dt: micrometre_per_second {pub: in};
    var l_3: micrometre {pub: in};
    var alpha_1: per_micrometre {pub: in};
    var beta_1: millinewton {pub: in};
    var alpha_2: per_micrometre {pub: in};
    var beta_2: millinewton {pub: in};
    var alpha_3: per_micrometre {pub: in};
    var beta_3: millinewton {pub: in};
    var lambda: millinewton {pub: in};
    var isotonic_mode: dimensionless {pub: in};
    var alpha_S_lengthening: per_micrometre {init: 46};
    var beta_S_lengthening: millinewton_second_per_micrometre {init: 0};
    var alpha_S_shortening: per_micrometre {init: 39};
    var beta_S_shortening: millinewton_second_per_micrometre {init: 0};
    var alp_s: per_micrometre;
    alp_s = sel
      case w <= v:
        alpha_S_lengthening;
      otherwise:
        alpha_S_shortening;
    endsel;
    k_S_vis = sel
      case w <= v:
        beta_S_lengthening*exp(alpha_S_lengthening*(l_2-l_1));
      otherwise:
        beta_S_shortening*exp(alpha_S_shortening*(l_2-l_1));
    endsel;
    ode(w, time) = sel
      case (isotonic_mode == 1{dimensionless}) and (k_S_vis <> 0{millinewton_second_per_micrometre}):
        (k_S_vis*(phi_chi-alp_s*sqr(w-v))-alpha_1*beta_1*exp(alpha_1*(l_2-l_1))*(w-v)-alpha_2*beta_2*exp(alpha_2*l_2)*w)/k_S_vis;
      case (isotonic_mode == 0{dimensionless}) and (k_S_vis <> 0{millinewton_second_per_micrometre}):
        phi_chi-alp_s*sqr(w-v)-(alpha_1*beta_1*exp(alpha_1*(l_2-l_1))*(w-v)+(alpha_2*beta_2*exp(alpha_2*l_2)+alpha_3*beta_3*exp(alpha_3*l_3))*w)/k_S_vis;
      case k_S_vis == 0{millinewton_second_per_micrometre}:
        0{micrometre_per_second2};
    endsel;
  enddef;

  def comp average_crossbridge_force as
    var p_v: dimensionless {pub: out};
    var p_prime_v: second_per_micrometre {pub: out};
    var P_star: dimensionless {pub: out};
    var G_star: dimensionless {pub: out};
    var gamma: dimensionless;
    var case_1: second_per_micrometre;
    var case_2: second_per_micrometre;
    var case_3: second_per_micrometre;
    var case_4: second_per_micrometre;
    var v: micrometre_per_second {pub: in};
    var phi_chi: micrometre_per_second2 {pub: in};
    var v_1: micrometre_per_second {pub: in};
    var v_max: micrometre_per_second {pub: in};
    var a: dimensionless {pub: in};
    var d_h: dimensionless {pub: in};
    var alpha_G: dimensionless {pub: in};
    var alpha_P: dimensionless {pub: in};
    gamma = a*d_h*sqr(v_1/v_max)/(3{dimensionless}*a*d_h-(a+1{dimensionless})*v_1/v_max);
    P_star = sel
      case v <= 0{micrometre_per_second}:
        a*(1{dimensionless}+v/v_max)/(a-v/v_max);
      otherwise:
        1{dimensionless}+d_h-sqr(d_h)*a/(a*d_h/gamma*sqr(v/v_max)+(a+1{dimensionless})*v/v_max+a*d_h);
    endsel;
    G_star = sel
      case (-v_max <= v) and (v <= 0{micrometre_per_second}):
        1{dimensionless}+0.6{dimensionless}*v/v_max;
      case (0{micrometre_per_second} < v) and (v <= v_1):
        P_star/((0.4{dimensionless}*a+1{dimensionless})*v/(a*v_max)+1{dimensionless});
      otherwise:
        P_star*exp(-alpha_G*pow((v-v_1)/v_max, alpha_P))/((0.4{dimensionless}*a+1{dimensionless})*v/(a*v_max)+1{dimensionless});
    endsel;
    case_1 = a*(0.4{dimensionless}+0.4{dimensionless}*a)/(v_max*sqr((a+1{dimensionless})*0.4{dimensionless}));
    case_2 = a*1{dimensionless}*(1{dimensionless}+0.4{dimensionless}*a+1.2{dimensionless}*v/v_max+0.6{dimensionless}*sqr(v/v_max))/(v_max*sqr((a-v/v_max)*(1{dimensionless}+0.6{dimensionless}*v/v_max)));
    case_3 = (0.4{dimensionless}*a+1{dimensionless})/(a*v_max);
    case_4 = 1{dimensionless}/v_max*exp(-alpha_G*pow(v/v_max-v_1/v_max, alpha_P))*((0.4{dimensionless}*a+1{dimensionless})/a+alpha_G*alpha_P*(1{dimensionless}+(0.4{dimensionless}*a+1{dimensionless})*v/(a*v_max))*pow(v/v_max-v_1/v_max, alpha_P-1{dimensionless}));
    p_v = P_star/G_star;
    p_prime_v = sel
      case v <= -v_max:
        case_1;
      case (-v_max < v) and (v <= 0{micrometre_per_second}):
        case_2;
      case (0{micrometre_per_second} < v) and (v <= v_1):
        case_3;
      otherwise:
        case_4;
    endsel;
  enddef;

  def comp membrane as
    var V: millivolt {init: -93.658148, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    var Cm: microF {init: 9.5e-5};
    var time: second {pub: in};
    var i_K1: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_Kr: nanoA {pub: in};
    var i_Ks: nanoA {pub: in};
    var i_Ca_L_K_cyt: nanoA {pub: in};
    var i_Ca_L_K_ds: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_Na: nanoA {pub: in};
    var i_b_Na: nanoA {pub: in};
    var i_p_Na: nanoA {pub: in};
    var i_Ca_L_Na_cyt: nanoA {pub: in};
    var i_Ca_L_Na_ds: nanoA {pub: in};
    var i_NaCa_cyt: nanoA {pub: in};
    var i_NaCa_ds: nanoA {pub: in};
    var i_Ca_L_Ca_cyt: nanoA {pub: in};
    var i_Ca_L_Ca_ds: nanoA {pub: in};
    var i_b_Ca: nanoA {pub: in};
    var i_Stim: nanoA;
    var stim_start: second {init: 0.06, pub: out};
    var stim_end: second {init: 10000, pub: out};
    var stim_period: second {init: 1, pub: out};
    var stim_duration: second {init: 0.0025, pub: out};
    var stim_amplitude: nanoA {init: -3, pub: out};
    i_Stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{nanoA};
    endsel;
    ode(V, time) = -1{dimensionless}/Cm*(i_Stim+i_K1+i_to+i_Kr+i_Ks+i_NaK+i_Na+i_b_Na+i_p_Na+i_Ca_L_Na_cyt+i_Ca_L_Na_ds+i_NaCa_cyt+i_NaCa_ds+i_Ca_L_Ca_cyt+i_Ca_L_Ca_ds+i_Ca_L_K_cyt+i_Ca_L_K_ds+i_b_Ca);
  enddef;

  def comp reversal_potentials as
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ks: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    var E_mh: millivolt {pub: out};
    var P_kna: dimensionless {init: 0.03};
    var K_o: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ks = R*T/F*ln((K_o+P_kna*Na_o)/(K_i+P_kna*Na_i));
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Ca_o/Ca_i);
    E_mh = R*T/F*ln((Na_o+0.12{dimensionless}*K_o)/(Na_i+0.12{dimensionless}*K_i));
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: nanoA {pub: out};
    var K_mk1: millimolar {init: 10, pub: out};
    var g_K1: microS {init: 0.5};
    var K_o: millimolar {pub: in};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in};
    i_K1 = g_K1*K_o/(K_o+K_mk1)*(V-E_K)/(1{dimensionless}+exp((V-E_K-10{millivolt})*F*1.25{dimensionless}/(R*T)));
  enddef;

  def comp rapid_delayed_rectifier_potassium_current as
    var i_Kr: nanoA {pub: out};
    var g_Kr1: microS {init: 0.0021};
    var g_Kr2: microS {init: 0.0013};
    var E_K: millivolt {pub: in};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var xr1: dimensionless {priv: in};
    var xr2: dimensionless {priv: in};
    i_Kr = (g_Kr1*xr1+g_Kr2*xr2)*1{dimensionless}/(1{dimensionless}+exp((V+9{millivolt})/22.4{millivolt}))*(V-E_K);
  enddef;

  def comp rapid_delayed_rectifier_potassium_current_xr1_gate as
    var xr1: dimensionless {init: 8.88859784542779e-6, pub: out};
    var V: millivolt {pub: in};
    var alpha_xr1: per_second;
    var beta_xr1: per_second;
    var time: second {pub: in};
    alpha_xr1 = 50{per_second}/(1{dimensionless}+exp(-(V-5{millivolt})/9{millivolt}));
    beta_xr1 = 0.05{per_second}*exp(-(V-20{millivolt})/15{millivolt});
    ode(xr1, time) = alpha_xr1*(1{dimensionless}-xr1)-beta_xr1*xr1;
  enddef;

  def comp rapid_delayed_rectifier_potassium_current_xr2_gate as
    var xr2: dimensionless {init: 1.53745791069154e-7, pub: out};
    var V: millivolt {pub: in};
    var alpha_xr2: per_second;
    var beta_xr2: per_second;
    var time: second {pub: in};
    alpha_xr2 = 50{per_second}/(1{dimensionless}+exp(-(V-5{millivolt})/9{millivolt}));
    beta_xr2 = 0.4{per_second}*exp(-pow((V+30{millivolt})/30{millivolt}, 3{dimensionless}));
    ode(xr2, time) = alpha_xr2*(1{dimensionless}-xr2)-beta_xr2*xr2;
  enddef;

  def comp slow_delayed_rectifier_potassium_current as
    var i_Ks: nanoA {pub: out};
    var g_Ks: microS {init: 0.0026};
    var E_Ks: millivolt {pub: in};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var xs: dimensionless {priv: in};
    i_Ks = g_Ks*sqr(xs)*(V-E_Ks);
  enddef;

  def comp slow_delayed_rectifier_potassium_current_xs_gate as
    var xs: dimensionless {init: 0.001, pub: out};
    var V: millivolt {pub: in};
    var alpha_xs: per_second;
    var beta_xs: per_second;
    var time: second {pub: in};
    alpha_xs = 14{per_second}/(1{dimensionless}+exp(-(V-40{millivolt})/9{millivolt}));
    beta_xs = 1{per_second}*exp(-V/45{millivolt});
    ode(xs, time) = alpha_xs*(1{dimensionless}-xs)-beta_xs*xs;
  enddef;

  def comp sodium_activated_potassium_current as
    var i_KNa: nanoA {pub: out};
    var g_K_Na: microS {init: 0};
    var K_kna: millimolar {init: 20};
    var Na_i: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_KNa = g_K_Na*Na_i/(Na_i+K_kna)*(V-E_K);
  enddef;

  def comp fast_sodium_current as
    var i_Na: nanoA {pub: out};
    var g_Na: microS {init: 2.5};
    var E_mh: millivolt {pub: in};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.0015, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_m: millivolt {init: 1e-5};
    var E0_m: millivolt;
    E0_m = V+41{millivolt};
    alpha_m = sel
      case abs(E0_m) < delta_m:
        2000{per_second};
      otherwise:
        200{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 8000{per_second}*exp(-0.056{per_millivolt}*(V+66{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 0.995, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 20{per_second}*exp(-0.125{per_millivolt}*(V+75{millivolt}));
    beta_h = 2000{per_second}/(1{dimensionless}+320{dimensionless}*exp(-0.1{per_millivolt}*(V+75{millivolt})));
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp persistent_sodium_current as
    var i_p_Na: nanoA {pub: out};
    var g_pna: microS {init: 0.004};
    var E_Na: millivolt {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_p_Na = g_pna*1{dimensionless}/(1{dimensionless}+exp(-(V+52{millivolt})/8{millivolt}))*(V-E_Na);
  enddef;

  def comp sodium_background_current as
    var i_b_Na: nanoA {pub: out};
    var g_bna: microS {init: 0.0006};
    var Na_i: millimolar {pub: in};
    var E_Na: millivolt {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_b_Na = g_bna*(V-E_Na);
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L_Ca_cyt: nanoA {pub: out};
    var i_Ca_L_K_cyt: nanoA {pub: out};
    var i_Ca_L_Na_cyt: nanoA {pub: out};
    var i_Ca_L_Ca_ds: nanoA {pub: out};
    var i_Ca_L_K_ds: nanoA {pub: out};
    var i_Ca_L_Na_ds: nanoA {pub: out};
    var i_Ca_L: nanoA {pub: out};
    var P_Ca_L: nanoA_per_millimolar {init: 0.1};
    var P_CaK: dimensionless {init: 0.002};
    var P_CaNa: dimensionless {init: 0.01};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in, priv: out};
    var Ca_ds: millimolar {pub: in, priv: out};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    var f2ds: dimensionless {priv: in};
    var Km_f2: millimolar {init: 100000, priv: out};
    var Km_f2ds: millimolar {init: 0.001, priv: out};
    var R_decay: per_second {init: 20, pub: out, priv: out};
    var FrICa: dimensionless {init: 1};
    i_Ca_L_Ca_cyt = (1{dimensionless}-FrICa)*4{dimensionless}*P_Ca_L*d*f*f2*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F*2{dimensionless}/(R*T)))*(Ca_i*exp(100{millivolt}*F/(R*T))-Ca_o*exp(-(V-50{millivolt})*F*2{dimensionless}/(R*T)));
    i_Ca_L_K_cyt = (1{dimensionless}-FrICa)*P_CaK*P_Ca_L*d*f*f2*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T)))*(K_i*exp(50{millivolt}*F/(R*T))-K_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L_Na_cyt = (1{dimensionless}-FrICa)*P_CaNa*P_Ca_L*d*f*f2*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T)))*(Na_i*exp(50{millivolt}*F/(R*T))-Na_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L_Ca_ds = FrICa*4{dimensionless}*P_Ca_L*d*f*f2ds*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F*2{dimensionless}/(R*T)))*(Ca_i*exp(100{millivolt}*F/(R*T))-Ca_o*exp(-(V-50{millivolt})*F*2{dimensionless}/(R*T)));
    i_Ca_L_K_ds = FrICa*P_CaK*P_Ca_L*d*f*f2ds*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T)))*(K_i*exp(50{millivolt}*F/(R*T))-K_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L_Na_ds = FrICa*P_CaNa*P_Ca_L*d*f*f2ds*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T)))*(Na_i*exp(50{millivolt}*F/(R*T))-Na_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L = i_Ca_L_Ca_cyt+i_Ca_L_K_cyt+i_Ca_L_Na_cyt+i_Ca_L_Ca_ds+i_Ca_L_K_ds+i_Ca_L_Na_ds;
  enddef;

  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {init: 0, pub: out};
    var alpha_d: per_second;
    var beta_d: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var E0_d: millivolt;
    var speed_d: dimensionless {init: 3};
    E0_d = V+24{millivolt}-5{millivolt};
    alpha_d = sel
      case abs(E0_d) < 0.0001{millivolt}:
        120{per_second};
      otherwise:
        30{per_millivolt_second}*E0_d/(1{dimensionless}-exp(-E0_d/4{millivolt}));
    endsel;
    beta_d = sel
      case abs(E0_d) < 0.0001{millivolt}:
        120{per_second};
      otherwise:
        12{per_millivolt_second}*E0_d/(exp(E0_d/10{millivolt})-1{dimensionless});
    endsel;
    ode(d, time) = speed_d*(alpha_d*(1{dimensionless}-d)-beta_d*d);
  enddef;

  def comp L_type_Ca_channel_f_gate as
    var f: dimensionless {init: 1, pub: out};
    var alpha_f: per_second;
    var beta_f: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var speed_f: dimensionless {init: 0.3};
    var delta_f: millivolt {init: 0.0001};
    var E0_f: millivolt;
    E0_f = V+34{millivolt};
    alpha_f = sel
      case abs(E0_f) < delta_f:
        25{per_second};
      otherwise:
        6.25{per_millivolt_second}*E0_f/(exp(E0_f/4{millivolt})-1{dimensionless});
    endsel;
    beta_f = 12{per_second}/(1{dimensionless}+exp(-1{dimensionless}*(V+34{millivolt})/4{millivolt}));
    ode(f, time) = speed_f*(alpha_f*(1{dimensionless}-f)-beta_f*f);
  enddef;

  def comp L_type_Ca_channel_f2_gate as
    var f2: dimensionless {init: 1, pub: out};
    var Km_f2: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(f2, time) = 1{per_second}-1{per_second}*(Ca_i/(Km_f2+Ca_i)+f2);
  enddef;

  def comp L_type_Ca_channel_f2ds_gate as
    var f2ds: dimensionless {init: 0.997, pub: out};
    var Km_f2ds: millimolar {pub: in};
    var R_decay: per_second {pub: in};
    var Ca_ds: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(f2ds, time) = R_decay*(1{dimensionless}-(Ca_ds/(Km_f2ds+Ca_ds)+f2ds));
  enddef;

  def comp calcium_background_current as
    var i_b_Ca: nanoA {pub: out};
    var g_bca: microS {init: 0.00025};
    var E_Ca: millivolt {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_b_Ca = g_bca*(V-E_Ca);
  enddef;

  def comp transient_outward_current as
    var i_to: nanoA {pub: out};
    var g_to: microS {init: 0.006};
    var g_tos: dimensionless {init: 0};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in, priv: out};
    var time: second {pub: in, priv: out};
    var s: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*(g_tos+s*(1{dimensionless}-g_tos))*r*(V-E_K);
  enddef;

  def comp transient_outward_current_s_gate as
    var s: dimensionless {init: 0.997044616031121, pub: out};
    var alpha_s: per_second;
    var beta_s: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_s = 0.033{per_second}*exp(-V/17{millivolt});
    beta_s = 33{per_second}/(1{dimensionless}+exp(-0.125{per_millivolt}*(V+10{millivolt})));
    ode(s, time) = alpha_s*(1{dimensionless}-s)-beta_s*s;
  enddef;

  def comp transient_outward_current_r_gate as
    var r: dimensionless {init: 1.63117173173398e-8, pub: out};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(r, time) = 333{per_second}*(1{dimensionless}/(1{dimensionless}+exp(-(V+4{millivolt})/5{millivolt}))-r);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: nanoA {pub: out};
    var i_NaK_max: nanoA {init: 0.7};
    var K_mK: millimolar {init: 1};
    var K_mNa: millimolar {init: 24.2};
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var time: second {pub: in};
    i_NaK = i_NaK_max*K_o/(K_mK+K_o)*Na_i/(K_mNa+Na_i);
  enddef;

  def comp sodium_calcium_exchanger as
    var i_NaCa: nanoA {pub: out};
    var i_NaCa_cyt: nanoA {pub: out};
    var i_NaCa_ds: nanoA {pub: out};
    var k_NaCa: nanoA {init: 0.0005};
    var n_NaCa: dimensionless {init: 3, pub: out};
    var d_NaCa: dimensionless {init: 0};
    var gamma: dimensionless {init: 0.5};
    var FRiNaCa: dimensionless {init: 0.001};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_ds: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_NaCa_cyt = (1{dimensionless}-FRiNaCa)*k_NaCa*(exp(gamma*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Na_i, n_NaCa)*Ca_o-exp((gamma-1{dimensionless})*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Na_o, n_NaCa)*Ca_i)/((1{millimolar4}+d_NaCa*(Ca_i*pow(Na_o, n_NaCa)+Ca_o*pow(Na_i, n_NaCa)))*(1{dimensionless}+Ca_i/0.0069{millimolar}));
    i_NaCa_ds = FRiNaCa*k_NaCa*(exp(gamma*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Na_i, n_NaCa)*Ca_o-exp((gamma-1{dimensionless})*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Na_o, n_NaCa)*Ca_ds)/((1{millimolar4}+d_NaCa*(Ca_ds*pow(Na_o, n_NaCa)+Ca_o*pow(Na_i, n_NaCa)))*(1{dimensionless}+Ca_ds/0.0069{millimolar}));
    i_NaCa = i_NaCa_cyt+i_NaCa_ds;
  enddef;

  def comp sarcoplasmic_reticulum_calcium_pump as
    var i_up: millimolar_per_second {pub: out};
    var K_1: dimensionless;
    var K_2: millimolar;
    var K_cyca: millimolar {init: 0.00015};
    var K_xcs: dimensionless {init: 0.4};
    var K_srca: millimolar {init: 0.5};
    var alpha_up: millimolar_per_second {init: 1};
    var beta_up: millimolar_per_second {init: 0.03};
    var Ca_i: millimolar {pub: in};
    var Ca_up: millimolar {pub: in};
    var time: second {pub: in};
    var flag_ingib: dimensionless {init: 0};
    var K_inh: millimolar {init: 4};
    K_1 = K_cyca*K_xcs/K_srca;
    K_2 = Ca_i+Ca_up*K_1+K_cyca*K_xcs+K_cyca;
    i_up = sel
      case flag_ingib == 0{dimensionless}:
        Ca_i/K_2*alpha_up-Ca_up*K_1/K_2*beta_up;
      otherwise:
        Ca_i/K_2*alpha_up/(1{dimensionless}+Ca_up/K_inh)-Ca_up*K_1/K_2*beta_up;
    endsel;
  enddef;

  def comp calcium_translocation as
    var i_trans: millimolar_per_second {pub: out};
    var Ca_rel: millimolar {pub: in};
    var Ca_up: millimolar {pub: in};
    var time: second {pub: in};
    var a_tr: per_second {init: 15};
    var alpha_CaS: per_millimolar_second {init: 50000};
    var beta_CaS: per_second {init: 32500};
    var CaS_tot: millimolar {init: 40, pub: out};
    var beta: millimolar {pub: out};
    i_trans = a_tr*(Ca_up-Ca_rel);
    beta = beta_CaS/alpha_CaS;
  enddef;

  def comp calcium_release as
    var i_rel: millimolar_per_second {pub: out};
    var VoltDep: dimensionless;
    var RegBindSite: dimensionless;
    var CaiReg: dimensionless;
    var CadsReg: dimensionless;
    var ActRate: per_second;
    var InactRate: per_second;
    var SRLeak: per_second {init: 0.05};
    var K_m_rel: per_second {init: 10000};
    var K_m_Ca_cyt: millimolar {init: 0.0005};
    var K_m_Ca_ds: millimolar {init: 0.01};
    var PrecFrac: dimensionless;
    var ActFrac: dimensionless {init: 0.001914};
    var ProdFrac: dimensionless {init: 0.2854569};
    var SpeedRel: dimensionless;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_ds: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    VoltDep = exp(0.08{per_millivolt}*(V-40{millivolt}));
    CaiReg = Ca_i/(Ca_i+K_m_Ca_cyt);
    CadsReg = Ca_ds/(Ca_ds+K_m_Ca_ds);
    RegBindSite = CaiReg+(1{dimensionless}-CaiReg)*CadsReg;
    ActRate = 500{per_second}*sqr(RegBindSite);
    InactRate = 60{per_second}+500{per_second}*sqr(RegBindSite);
    SpeedRel = sel
      case V < -50{millivolt}:
        5{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    PrecFrac = 1{dimensionless}-ActFrac-ProdFrac;
    ode(ActFrac, time) = PrecFrac*SpeedRel*ActRate-ActFrac*SpeedRel*InactRate;
    ode(ProdFrac, time) = ActFrac*SpeedRel*InactRate-SpeedRel*0.6{per_second}*ProdFrac;
    i_rel = (sqr(ActFrac/(ActFrac+0.25{dimensionless}))*K_m_rel+SRLeak)*Ca_rel;
  enddef;

  def comp extracellular_sodium_concentration as
    var Na_o: millimolar {init: 140, pub: out};
  enddef;

  def comp intracellular_sodium_concentration as
    var Na_i: millimolar {init: 5.18787513289509, pub: out};
    var V_i: micrometre3 {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: nanoA {pub: in};
    var i_b_Na: nanoA {pub: in};
    var i_p_Na: nanoA {pub: in};
    var i_Ca_L_Na_cyt: nanoA {pub: in};
    var i_Ca_L_Na_ds: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_NaCa_cyt: nanoA {pub: in};
    var n_NaK: dimensionless {init: 1.5, pub: out};
    var n_NaCa: dimensionless {pub: in};
    var i_NaCa: nanoA {pub: in};
    ode(Na_i, time) = -1{mA_nA}/(1{litre_micrometre3}*V_i*F)*(i_Na+i_p_Na+i_b_Na+i_Ca_L_Na_cyt+i_Ca_L_Na_ds+n_NaK/(n_NaK-1{dimensionless})*i_NaK+n_NaCa/(n_NaCa-2{dimensionless})*i_NaCa);
  enddef;

  def comp extracellular_calcium_concentration as
    var Ca_o: millimolar {init: 2, pub: out};
  enddef;

  def comp extracellular_potassium_concentration as
    var K_o: millimolar {init: 3.988, pub: out};
    var K_b: millimolar {init: 4};
    var i_Kr: nanoA {pub: in};
    var i_Ks: nanoA {pub: in};
    var i_K1: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_Ca_L_K_cyt: nanoA {pub: in};
    var i_Ca_L_K_ds: nanoA {pub: in};
    var time: second {pub: in};
    var n_NaK: dimensionless {pub: in};
    var F: coulomb_per_mole {pub: in};
    var V_e: micrometre3 {pub: in};
    ode(K_o, time) = 1{mA_nA}*(i_Kr+i_Ks+i_K1+i_to-1{dimensionless}/(n_NaK-1{dimensionless})*i_NaK+i_Ca_L_K_cyt+i_Ca_L_K_ds)/(1{litre_micrometre3}*V_e*F)-0.7{per_second}*(K_o-K_b);
  enddef;

  def comp intracellular_potassium_concentration as
    var K_i: millimolar {init: 139.054, pub: out};
    var V_i: micrometre3 {pub: in};
    var i_K1: nanoA {pub: in};
    var i_Kr: nanoA {pub: in};
    var i_Ks: nanoA {pub: in};
    var i_Ca_L_K_cyt: nanoA {pub: in};
    var i_Ca_L_K_ds: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var n_NaK: dimensionless {pub: in};
    ode(K_i, time) = -1{mA_nA}/(1{litre_micrometre3}*V_i*F)*(i_K1+i_Kr+i_Ks+i_Ca_L_K_cyt+i_Ca_L_K_ds+i_to-1{dimensionless}/(n_NaK-1{dimensionless})*i_NaK);
  enddef;

  def comp intracellular_calcium_concentration as
    var Ca_i: millimolar {init: 6.15e-6, pub: out};
    var Ca_ds: millimolar {init: 2.55e-6, pub: out};
    var Ca_up: millimolar {init: 0.994579, pub: out};
    var Ca_rel: millimolar {init: 0.989665, pub: out};
    var radius: micrometre {init: 12};
    var length: micrometre {init: 74};
    var V_i: micrometre3 {pub: out};
    var V_e: micrometre3 {pub: out};
    var V_Cell: micrometre3;
    var V_i_ratio: dimensionless {init: 0.49};
    var V_ds_ratio: dimensionless {init: 0.1};
    var V_rel_ratio: dimensionless {init: 0.003};
    var V_e_ratio: dimensionless {init: 0.4};
    var V_up_ratio: dimensionless {init: 0.03};
    var Kdecay: per_second {init: 10};
    var i_up: millimolar_per_second {pub: in};
    var i_trans: millimolar_per_second {pub: in};
    var i_rel: millimolar_per_second {pub: in};
    var i_NaCa_cyt: nanoA {pub: in};
    var i_NaCa_ds: nanoA {pub: in};
    var i_Ca_L_Ca_cyt: nanoA {pub: in};
    var i_Ca_L_Ca_ds: nanoA {pub: in};
    var i_b_Ca: nanoA {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    var A: millimolar {init: 0.00015, pub: out};
    var N_A: dimensionless;
    var pi_N_A: dimensionless;
    var pi_min: dimensionless {init: 0.03};
    var N: dimensionless {pub: in};
    var a_on: per_millimolar_second {init: 70000};
    var a_off: per_second {init: 200};
    var k_A: per_millimolar {pub: in};
    var L_oz: dimensionless {pub: in};
    var A_tot: millimolar {init: 0.07, pub: out};
    var B_1: millimolar {init: 0, pub: out};
    var B_1_tot: millimolar {init: 0.08};
    var b_1_on: per_millimolar_second {init: 100000};
    var b_1_off: per_second {init: 182};
    var B_2: millimolar {init: 0, pub: out};
    var B_2_tot: millimolar {init: 0.1};
    var b_2_on: per_millimolar_second {init: 1000};
    var b_2_off: per_second {init: 3};
    var CaS_tot: millimolar {pub: in};
    var beta: millimolar {pub: in};
    var n_NaCa: dimensionless {pub: in};
    N_A = A_tot*N/(L_oz*A);
    pi_N_A = sel
      case N_A <= 0{dimensionless}:
        pi_min;
      case N_A <= 1{dimensionless}:
        pow(pi_min, N_A);
      otherwise:
        1{dimensionless};
    endsel;
    ode(A, time) = a_on*(A_tot-A)*Ca_i-a_off*exp(-k_A*A)*pi_N_A*A;
    ode(B_1, time) = b_1_on*(B_1_tot-B_1)*Ca_i-b_1_off*B_1;
    ode(B_2, time) = b_2_on*(B_2_tot-B_2)*Ca_i-b_2_off*B_2;
    V_Cell = 3.141592654{dimensionless}*sqr(radius/1000{dimensionless})*length/1000{dimensionless};
    V_i = V_Cell*V_i_ratio;
    V_e = V_Cell*V_e_ratio;
    ode(Ca_i, time) = -1{mA_nA}/(2{dimensionless}*1{litre_micrometre3}*V_i*F)*(i_Ca_L_Ca_cyt+i_b_Ca-2{dimensionless}/(n_NaCa-2{dimensionless})*i_NaCa_cyt)+Ca_ds*V_ds_ratio*Kdecay+i_rel*V_rel_ratio/V_i_ratio-ode(A, time)-ode(B_1, time)-ode(B_2, time)-i_up;
    ode(Ca_ds, time) = (-1{mA_nA}*i_Ca_L_Ca_ds+2{mA_nA}*i_NaCa_ds/(n_NaCa-2{dimensionless}))/(2{dimensionless}*1{litre_micrometre3}*V_ds_ratio*V_i*F)-Ca_ds*Kdecay;
    ode(Ca_up, time) = V_i_ratio/V_up_ratio*i_up-i_trans;
    ode(Ca_rel, time) = (V_up_ratio/V_rel_ratio*i_trans-i_rel)/(1{dimensionless}+beta*CaS_tot/sqr(Ca_rel+beta));
  enddef;

  def comp fibroblast as
    var g_fibro_junct: microS {init: 2.9e-4};
    var g_fibro: microS {init: 2e-4};
    var c_fibro: microF {init: 1e-5};
    var g_fibro_stretch: microS {init: 0};
    var E_fibro_stretch: millivolt {init: 0};
    var V_fibro: millivolt {init: -20};
    var i_fibro: nanoA;
    var i_fibro_junct: nanoA;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_fibro = g_fibro*(V_fibro+20{millivolt})+g_fibro_stretch*(V_fibro-E_fibro_stretch);
    i_fibro_junct = -g_fibro_junct*(V-V_fibro);
    ode(V_fibro, time) = -(i_fibro+i_fibro_junct)/c_fibro;
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_gate;
        comp L_type_Ca_channel_f_gate;
        comp L_type_Ca_channel_f2_gate;
        comp L_type_Ca_channel_f2ds_gate;
      endcomp;
      comp rapid_delayed_rectifier_potassium_current incl
        comp rapid_delayed_rectifier_potassium_current_xr1_gate;
        comp rapid_delayed_rectifier_potassium_current_xr2_gate;
      endcomp;
      comp slow_delayed_rectifier_potassium_current incl
        comp slow_delayed_rectifier_potassium_current_xs_gate;
      endcomp;
      comp time_independent_potassium_current;
      comp sodium_activated_potassium_current;
      comp persistent_sodium_current;
      comp sodium_background_current;
      comp calcium_background_current;
      comp transient_outward_current incl
        comp transient_outward_current_s_gate;
        comp transient_outward_current_r_gate;
      endcomp;
      comp sodium_potassium_pump;
      comp sodium_calcium_exchanger;
      comp sarcoplasmic_reticulum_calcium_pump;
      comp calcium_translocation;
      comp calcium_release;
      comp extracellular_sodium_concentration;
      comp intracellular_sodium_concentration;
      comp extracellular_potassium_concentration;
      comp intracellular_potassium_concentration;
      comp extracellular_calcium_concentration;
      comp intracellular_calcium_concentration;
      comp reversal_potentials;
      comp fibroblast;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
      comp L_type_Ca_channel_f2_gate;
      comp L_type_Ca_channel_f2ds_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_s_gate;
      comp transient_outward_current_r_gate;
    endcomp;
    comp rapid_delayed_rectifier_potassium_current incl
      comp rapid_delayed_rectifier_potassium_current_xr1_gate;
      comp rapid_delayed_rectifier_potassium_current_xr2_gate;
    endcomp;
    comp slow_delayed_rectifier_potassium_current incl
      comp slow_delayed_rectifier_potassium_current_xs_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_activated_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between persistent_sodium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_exchanger and environment for
    vars time and time;
  enddef;
  def map between intracellular_sodium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between sarcoplasmic_reticulum_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between calcium_translocation and environment for
    vars time and time;
  enddef;
  def map between calcium_release and environment for
    vars time and time;
  enddef;
  def map between fibroblast and environment for
    vars time and time;
  enddef;
  def map between calcium_release and membrane for
    vars V and V;
  enddef;
  def map between membrane and reversal_potentials for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L_Ca_cyt and i_Ca_L_Ca_cyt;
    vars i_Ca_L_Ca_ds and i_Ca_L_Ca_ds;
    vars i_Ca_L_Na_cyt and i_Ca_L_Na_cyt;
    vars i_Ca_L_Na_ds and i_Ca_L_Na_ds;
    vars i_Ca_L_K_cyt and i_Ca_L_K_cyt;
    vars i_Ca_L_K_ds and i_Ca_L_K_ds;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and rapid_delayed_rectifier_potassium_current for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and slow_delayed_rectifier_potassium_current for
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and transient_outward_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_activated_potassium_current for
    vars V and V;
  enddef;
  def map between membrane and persistent_sodium_current for
    vars V and V;
    vars i_p_Na and i_p_Na;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and sodium_calcium_exchanger for
    vars V and V;
    vars i_NaCa_cyt and i_NaCa_cyt;
    vars i_NaCa_ds and i_NaCa_ds;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and fibroblast for
    vars V and V;
  enddef;
  def map between membrane and intracellular_sodium_concentration for
    vars F and F;
  enddef;
  def map between membrane and intracellular_potassium_concentration for
    vars F and F;
  enddef;
  def map between membrane and intracellular_calcium_concentration for
    vars F and F;
  enddef;
  def map between reversal_potentials and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and persistent_sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and rapid_delayed_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and slow_delayed_rectifier_potassium_current for
    vars E_Ks and E_Ks;
  enddef;
  def map between reversal_potentials and sodium_activated_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and transient_outward_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and fast_sodium_current for
    vars E_mh and E_mh;
  enddef;
  def map between reversal_potentials and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between reversal_potentials and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between reversal_potentials and intracellular_potassium_concentration for
    vars K_i and K_i;
  enddef;
  def map between reversal_potentials and intracellular_sodium_concentration for
    vars Na_i and Na_i;
  enddef;
  def map between reversal_potentials and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between reversal_potentials and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
  enddef;
  def map between time_independent_potassium_current and intracellular_potassium_concentration for
    vars i_K1 and i_K1;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and intracellular_potassium_concentration for
    vars i_Kr and i_Kr;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and intracellular_potassium_concentration for
    vars i_Ks and i_Ks;
  enddef;
  def map between fast_sodium_current and intracellular_sodium_concentration for
    vars i_Na and i_Na;
  enddef;
  def map between sodium_background_current and intracellular_sodium_concentration for
    vars i_b_Na and i_b_Na;
    vars Na_i and Na_i;
  enddef;
  def map between persistent_sodium_current and intracellular_sodium_concentration for
    vars i_p_Na and i_p_Na;
  enddef;
  def map between L_type_Ca_channel and intracellular_sodium_concentration for
    vars i_Ca_L_Na_cyt and i_Ca_L_Na_cyt;
    vars i_Ca_L_Na_ds and i_Ca_L_Na_ds;
    vars Na_i and Na_i;
  enddef;
  def map between L_type_Ca_channel and intracellular_calcium_concentration for
    vars i_Ca_L_Ca_cyt and i_Ca_L_Ca_cyt;
    vars i_Ca_L_Ca_ds and i_Ca_L_Ca_ds;
    vars Ca_i and Ca_i;
    vars Ca_ds and Ca_ds;
  enddef;
  def map between L_type_Ca_channel and intracellular_potassium_concentration for
    vars i_Ca_L_K_cyt and i_Ca_L_K_cyt;
    vars i_Ca_L_K_ds and i_Ca_L_K_ds;
    vars K_i and K_i;
  enddef;
  def map between L_type_Ca_channel and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between L_type_Ca_channel and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between calcium_background_current and intracellular_calcium_concentration for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between sodium_activated_potassium_current and intracellular_sodium_concentration for
    vars Na_i and Na_i;
  enddef;
  def map between sodium_potassium_pump and intracellular_sodium_concentration for
    vars i_NaK and i_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_potassium_pump and intracellular_potassium_concentration for
    vars i_NaK and i_NaK;
  enddef;
  def map between transient_outward_current and intracellular_potassium_concentration for
    vars i_to and i_to;
  enddef;
  def map between sodium_calcium_exchanger and intracellular_calcium_concentration for
    vars i_NaCa_cyt and i_NaCa_cyt;
    vars i_NaCa_ds and i_NaCa_ds;
    vars Ca_i and Ca_i;
    vars Ca_ds and Ca_ds;
    vars n_NaCa and n_NaCa;
  enddef;
  def map between sodium_calcium_exchanger and intracellular_sodium_concentration for
    vars i_NaCa_cyt and i_NaCa_cyt;
    vars i_NaCa and i_NaCa;
    vars n_NaCa and n_NaCa;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_calcium_exchanger and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between sodium_calcium_exchanger and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between sarcoplasmic_reticulum_calcium_pump and intracellular_calcium_concentration for
    vars i_up and i_up;
    vars Ca_i and Ca_i;
    vars Ca_up and Ca_up;
  enddef;
  def map between calcium_translocation and intracellular_calcium_concentration for
    vars i_trans and i_trans;
    vars Ca_rel and Ca_rel;
    vars Ca_up and Ca_up;
    vars CaS_tot and CaS_tot;
    vars beta and beta;
  enddef;
  def map between calcium_release and intracellular_calcium_concentration for
    vars i_rel and i_rel;
    vars Ca_rel and Ca_rel;
    vars Ca_i and Ca_i;
    vars Ca_ds and Ca_ds;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and rapid_delayed_rectifier_potassium_current_xr1_gate for
    vars xr1 and xr1;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and rapid_delayed_rectifier_potassium_current_xr2_gate for
    vars xr2 and xr2;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and slow_delayed_rectifier_potassium_current_xs_gate for
    vars xs and xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f2_gate for
    vars f2 and f2;
    vars time and time;
    vars V and V;
    vars Ca_i and Ca_i;
    vars Km_f2 and Km_f2;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f2ds_gate for
    vars f2ds and f2ds;
    vars time and time;
    vars V and V;
    vars Ca_ds and Ca_ds;
    vars Km_f2ds and Km_f2ds;
    vars R_decay and R_decay;
  enddef;
  def map between transient_outward_current and transient_outward_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between intracellular_sodium_concentration and intracellular_calcium_concentration for
    vars V_i and V_i;
  enddef;
  def map between intracellular_potassium_concentration and intracellular_calcium_concentration for
    vars V_i and V_i;
  enddef;
  def map between parameters and isotonic for
    vars isotonic and isotonic;
  enddef;
  def map between force and isotonic for
    vars F_muscle and F_muscle;
  enddef;
  def map between length and isotonic for
    vars isotonic_mode and isotonic_mode;
    vars l and l;
    vars l_0 and l_0;
  enddef;
  def map between PE_velocity and isotonic for
    vars isotonic_mode and isotonic_mode;
  enddef;
  def map between CE_velocity and isotonic for
    vars isotonic_mode and isotonic_mode;
  enddef;
  def map between membrane and isotonic for
    vars stim_period and stim_period;
  enddef;
  def map between environment and crossbridge_kinetics for
    vars time and time;
  enddef;
  def map between environment and length for
    vars time and time;
  enddef;
  def map between environment and CE_velocity for
    vars time and time;
  enddef;
  def map between environment and PE_velocity for
    vars time and time;
  enddef;
  def map between parameters and parameters_izakov_et_al_1991 for
    vars v_max and v_max;
  enddef;
  def map between force and parameters for
    vars alpha_1 and alpha_1;
    vars beta_1 and beta_1;
    vars alpha_2 and alpha_2;
    vars beta_2 and beta_2;
    vars alpha_3 and alpha_3;
    vars beta_3 and beta_3;
    vars lambda and lambda;
  enddef;
  def map between force and crossbridge_kinetics for
    vars N and N;
  enddef;
  def map between force and length for
    vars l_1 and l_1;
    vars l_2 and l_2;
    vars l_3 and l_3;
  enddef;
  def map between force and CE_velocity for
    vars v and v;
    vars k_P_vis and k_P_vis;
  enddef;
  def map between force and PE_velocity for
    vars w and w;
    vars k_S_vis and k_S_vis;
  enddef;
  def map between force and average_crossbridge_force for
    vars p_v and p_v;
  enddef;
  def map between crossbridge_kinetics and parameters for
    vars mu and mu;
    vars k_mu and k_mu;
    vars kappa and kappa;
    vars kappa_0 and kappa_0;
    vars m_0 and m_0;
  enddef;
  def map between crossbridge_kinetics and intracellular_calcium_concentration for
    vars A and A;
    vars A_tot and A_tot;
    vars N and N;
    vars L_oz and L_oz;
  enddef;
  def map between crossbridge_kinetics and average_crossbridge_force for
    vars G_star and G_star;
    vars P_star and P_star;
  enddef;
  def map between crossbridge_kinetics and length for
    vars l_1 and l_1;
  enddef;
  def map between crossbridge_kinetics and CE_velocity for
    vars K_kappa and K_kappa;
    vars v and v;
    vars N and N;
  enddef;
  def map between crossbridge_kinetics and parameters_izakov_et_al_1991 for
    vars S_0 and S_0;
    vars q_v and q_v;
    vars v_st and v_st;
    vars q_4 and q_4;
  enddef;
  def map between length and CE_velocity for
    vars v and v;
    vars phi_chi_2 and phi_chi_2;
    vars dl_1_dt and dl_1_dt;
    vars l_1 and l_1;
    vars l_2 and l_2;
    vars l_3 and l_3;
  enddef;
  def map between length and PE_velocity for
    vars w and w;
    vars k_S_vis and k_S_vis;
    vars dl_1_dt and dl_1_dt;
    vars l_1 and l_1;
    vars dl_2_dt and dl_2_dt;
    vars l_2 and l_2;
    vars l_3 and l_3;
  enddef;
  def map between length and membrane for
    vars stim_start and stim_start;
    vars stim_end and stim_end;
    vars stim_period and stim_period;
    vars stim_duration and stim_duration;
    vars stim_amplitude and stim_amplitude;
  enddef;
  def map between CE_velocity and parameters for
    vars alpha_1 and alpha_1;
    vars beta_1 and beta_1;
    vars alpha_2 and alpha_2;
    vars beta_2 and beta_2;
    vars alpha_3 and alpha_3;
    vars beta_3 and beta_3;
    vars lambda and lambda;
  enddef;
  def map between CE_velocity and parameters_izakov_et_al_1991 for
    vars v and v;
  enddef;
  def map between CE_velocity and PE_velocity for
    vars v and v;
    vars w and w;
    vars k_S_vis and k_S_vis;
    vars phi_chi and phi_chi;
  enddef;
  def map between PE_velocity and parameters for
    vars alpha_1 and alpha_1;
    vars beta_1 and beta_1;
    vars alpha_2 and alpha_2;
    vars beta_2 and beta_2;
    vars alpha_3 and alpha_3;
    vars beta_3 and beta_3;
    vars lambda and lambda;
  enddef;
  def map between average_crossbridge_force and parameters for
    vars v_max and v_max;
    vars a and a;
    vars d_h and d_h;
    vars alpha_P and alpha_P;
  enddef;
  def map between average_crossbridge_force and parameters_izakov_et_al_1991 for
    vars v_1 and v_1;
    vars alpha_G and alpha_G;
  enddef;
  def map between average_crossbridge_force and CE_velocity for
    vars v and v;
    vars phi_chi and phi_chi;
    vars p_v and p_v;
    vars p_prime_v and p_prime_v;
  enddef;
  def map between intracellular_calcium_concentration and parameters_izakov_et_al_1991 for
    vars k_A and k_A;
  enddef;
  def map between extracellular_potassium_concentration and rapid_delayed_rectifier_potassium_current for
    vars i_Kr and i_Kr;
  enddef;
  def map between extracellular_potassium_concentration and slow_delayed_rectifier_potassium_current for
    vars i_Ks and i_Ks;
  enddef;
  def map between extracellular_potassium_concentration and time_independent_potassium_current for
    vars i_K1 and i_K1;
    vars K_o and K_o;
  enddef;
  def map between extracellular_potassium_concentration and transient_outward_current for
    vars i_to and i_to;
  enddef;
  def map between extracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between extracellular_potassium_concentration and sodium_potassium_pump for
    vars i_NaK and i_NaK;
    vars K_o and K_o;
  enddef;
  def map between extracellular_potassium_concentration and L_type_Ca_channel for
    vars i_Ca_L_K_ds and i_Ca_L_K_ds;
    vars i_Ca_L_K_cyt and i_Ca_L_K_cyt;
    vars K_o and K_o;
  enddef;
  def map between extracellular_potassium_concentration and membrane for
    vars F and F;
  enddef;
  def map between extracellular_potassium_concentration and intracellular_sodium_concentration for
    vars n_NaK and n_NaK;
  enddef;
  def map between intracellular_potassium_concentration and intracellular_sodium_concentration for
    vars n_NaK and n_NaK;
  enddef;
  def map between extracellular_potassium_concentration and intracellular_calcium_concentration for
    vars V_e and V_e;
  enddef;
  // The following RDF block contains metadata that applies to this document
  // as a whole, as indicated by the empty about attribute on the
  // <rdf:Description> element.
  // The Model Builder Metadata.  The Dublin Core "creator" element is used
  // to indicate the person who translated the model into CellML.
  //   The Creation Date metadata. This is the date on which the model
  //   was translated into CellML.
  //
  // <dcterms:created rdf:parseType="Resource">
  //   <dcterms:W3CDTF>2009-09-28</dcterms:W3CDTF>
  // </dcterms:created>
  // The Modification History metadata. This lists the changes that have been
  // made to the document, who made the changes, and when they were made.
  // The following metadata refers to the model itself, as indicated by the
  // reference to the ID "ekaterinburg_rat", which is
  // declared on the <model> element.
  // A human readable name for the model.
  // Keyword(s)
enddef;
