// creator: Family Cumin; Given David; d.cumin@auckland.ac.nz; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2010-10-06
// reference: subject_type keyword; electrophysiology; cardiac
def model FINAL as
  // Model Status
  //
  // This model was developed in CellML and runs in COR.
  //
  // Model Structure
  //
  // This model integrates a sinoatrial node model based on the work of Courtemanche et al. (1998), Chandler et al. (2009), and Verkerk et al. (2007). This is connected to a ventricular model, very similar to the approach of Shim et al. (2006). This, in turn, is connected to a lumped parameter, compartment model of the circulatory model. The cardiovascular model(s) are linked to a simple lung model from Athanasiades et al. (2000) via the gas exchange model of Liu et al. (1998).
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit mMsq as
    unit mM {expo: 2};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millisecond_per_millimolar as
    unit millisecond;
    unit millimolar {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoA_per_picoF as
    unit ampere {pref: pico};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit nanoS_per_picoF as
    unit siemens {pref: nano};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit micrometre_3 as
    unit metre {pref: micro, expo: 3};
  enddef;
  def unit per_micrometre_3 as
    unit metre {pref: micro, expo: -3};
  enddef;
  def unit mm2 as
    unit metre {pref: milli, expo: 2};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {pref: milli, expo: -1};
  enddef;
  def unit centisecond as
    unit second {pref: centi};
  enddef;
  def unit per_millisecond as
    unit second {pref: milli, expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar2 as
    unit millimolar {expo: 2};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit second {pref: milli, expo: -1};
  enddef;
  def unit mN_per_mm2_micrometre_millimolar as
    unit newton {pref: milli};
    unit metre {pref: milli, expo: -2};
    unit micrometre {expo: -1};
    unit millimolar {expo: -1};
  enddef;
  def unit millisecond_per_micrometre2 as
    unit millisecond;
    unit micrometre {expo: -2};
  enddef;
  def unit per_millimolar_millisecond as
    unit millimolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit mN_per_mm2 as
    unit newton {pref: milli};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit mN_per_mm2_micrometre as
    unit mN_per_mm2;
    unit micrometre {expo: -1};
  enddef;
  def unit mN_per_mm2_micrometre5 as
    unit mN_per_mm2;
    unit micrometre {expo: -5};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre3 as
    unit metre {pref: micro, expo: 3};
  enddef;
  def unit litre_micrometre3 as
    unit litre;
    unit micrometre3 {expo: -1};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit ng as
    unit gram {pref: nano};
  enddef;
  def unit uA as
    unit ampere {pref: micro};
  enddef;
  def unit pA as
    unit ampere {pref: pico};
  enddef;
  def unit K as
    unit kelvin;
  enddef;
  def unit nmol as
    unit mole {pref: nano};
  enddef;
  def unit mmsq as
    unit mm {expo: 2};
  enddef;
  def unit mmcu as
    unit mm {expo: 3};
  enddef;
  def unit mssq as
    unit ms {expo: 2};
  enddef;
  def unit mscu as
    unit ms {expo: 3};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit mVsq as
    unit mV {expo: 2};
  enddef;
  def unit mV_per_ms as
    unit mV;
    unit ms {expo: -1};
  enddef;
  def unit mS as
    unit siemens {pref: milli};
  enddef;
  def unit mS_per_mmsq as
    unit mS;
    unit mm {expo: -2};
  enddef;
  def unit mS_per_mm as
    unit mS;
    unit mm {expo: -1};
  enddef;
  def unit uA_per_mmsq as
    unit uA;
    unit mm {expo: -2};
  enddef;
  def unit uA_per_mmcu as
    unit uA;
    unit mm {expo: -3};
  enddef;
  def unit nC as
    unit coulomb {pref: nano};
  enddef;
  def unit uF as
    unit farad {pref: micro};
  enddef;
  def unit uF_per_mmsq as
    unit uF;
    unit mm {expo: -2};
  enddef;
  def unit mM as
    unit nmol;
    unit mm {expo: -3};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit nN as
    unit newton {pref: nano};
  enddef;
  def unit mPa as
    unit pascal {pref: milli};
  enddef;
  def unit pJ as
    unit joule {pref: pico};
  enddef;
  def unit nW as
    unit watt {pref: nano};
  enddef;
  def unit nS as
    unit siemens {pref: nano};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit per_mm as
    unit mm {expo: -1};
  enddef;
  def unit per_mV as
    unit mV {expo: -1};
  enddef;
  def unit per_mL as
    unit mL {expo: -1};
  enddef;
  def unit per_mV_per_ms as
    unit mV {expo: -1};
    unit per_ms;
  enddef;
  def unit per_mM_per_ms as
    unit mM {expo: -1};
    unit per_ms;
  enddef;
  def unit uA_per_mmsq_per_mM as
    unit uA;
    unit mm {expo: -2};
    unit mM {expo: -1};
  enddef;
  def unit mm_per_ms as
    unit mm;
    unit per_ms;
  enddef;
  def unit gas_constant as
    unit pJ;
    unit nmol {expo: -1};
    unit K {expo: -1};
  enddef;
  def unit faradays_constant as
    unit nC;
    unit nmol {expo: -1};
  enddef;
  def unit pA_per_pF as
    unit ampere {pref: pico};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit nS_per_pF as
    unit siemens {pref: nano};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit uF_per_cmsq as
    unit farad {pref: micro};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit um as
    unit metre {pref: micro};
  enddef;
  def unit umsq as
    unit metre {pref: micro, expo: 2};
  enddef;
  def unit umcu as
    unit metre {pref: micro, expo: 3};
  enddef;
  def unit cmcu_per_uF_per_s as
    unit metre {pref: centi, expo: 3};
    unit farad {pref: micro, expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mmcu_per_uF_per_ms as
    unit metre {pref: milli, expo: 3};
    unit farad {pref: micro, expo: -1};
    unit second {pref: milli, expo: -1};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit elastance as
    unit pascal {mult: 133.322};
    unit litre {pref: milli, expo: -1};
  enddef;
  def unit s as
    unit second;
  enddef;
  def unit Hz as
    unit s {expo: -1};
  enddef;
  def unit flow as
    unit litre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit inductance as
    unit mmHg;
    unit s {expo: 2};
    unit mL {expo: -1};
  enddef;
  def unit capacitance as
    unit mL;
    unit mmHg {expo: -1};
  enddef;
  def unit concentration as
    unit mL;
    unit mL {expo: -1};
  enddef;
  def unit ratepm as
    unit second {expo: -1, mult: 60};
  enddef;
  def unit Hz2rpm as
    unit Hz {expo: -1};
    unit ratepm;
  enddef;
  def unit unitconvert as
    unit dimensionless;
  enddef;
  def unit mL_per_mole as
    unit mL;
    unit mole {expo: -1};
  enddef;
  def unit cmH2O_sec2_per_L2 as
    unit cmH2O;
    unit second;
    unit liter {expo: -2};
  enddef;
  def unit cmH2O_sec_per_L as
    unit cmH2O;
    unit second;
    unit liter {expo: -1};
  enddef;
  def unit mL_per_s as
    unit mL;
    unit second {expo: -1};
  enddef;
  def unit mole_per_min as
    unit mole;
    unit minute {expo: -1};
  enddef;
  def unit mL_per_min as
    unit mL;
    unit minute {expo: -1};
  enddef;
  def unit mlSTPD_per_s_per_mmHg4 as
    unit mlSTPD;
    unit second {expo: -1};
    unit per_mmHg {expo: 4};
  enddef;
  def unit mlSTPD_per_s_per_mmHg3 as
    unit mlSTPD;
    unit second {expo: -1};
    unit per_mmHg {expo: 3};
  enddef;
  def unit mlSTPD_per_s_per_mmHg2 as
    unit mlSTPD;
    unit second {expo: -1};
    unit per_mmHg {expo: 2};
  enddef;
  def unit mlSTPD_per_s_per_mmHg as
    unit mlSTPD;
    unit second {expo: -1};
    unit per_mmHg;
  enddef;
  def unit mole_per_mmHg as
    unit mole;
    unit per_mmHg;
  enddef;
  def unit per_mmHg as
    unit mmHg {expo: -1};
  enddef;
  def unit cmH2O as
    unit pascal {mult: 0.0102};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.322};
  enddef;
  def unit Respresistance as
    unit cmH2O;
    unit second;
    unit litre {expo: -1};
  enddef;
  def unit CVresistance as
    unit mmHg;
    unit s;
    unit mL {expo: -1};
  enddef;
  def unit L as
    unit litre;
  enddef;
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit per_min as
    unit minute {expo: -1};
  enddef;
  def unit L_per_cmH2O as
    unit L;
    unit cmH2O {expo: -1};
  enddef;
  def unit per_L as
    unit L {expo: -1};
  enddef;
  def unit cmH2O_s2_per_L2 as
    unit cmH2O;
    unit second {expo: 2};
    unit L {expo: -2};
  enddef;
  def unit L_per_sec as
    unit L;
    unit second {expo: -1};
  enddef;
  def unit mlSTPD as
    unit mole {expo: -1, mult: 22400};
  enddef;
  def unit liter_per_min as
    unit liter;
    unit minute {expo: -1};
  enddef;
  def unit mL as
    unit liter {pref: milli};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;

  def comp SAmembrane as
    var V: millivolt {init: -25.9148656754081, pub: out};
    var R: joule_per_mole_kelvin {init: 8.3143, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_millimole {init: 96.4867, pub: out};
    var Cm: picoF {init: 56, pub: out};
    var time: millisecond {pub: in};
    var i_Na: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_to: picoA {pub: in};
    var i_Kur: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_CaP: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    var i_Ca_T: picoA {pub: in};
    var i_f: picoA {pub: in};
    var i_KACh: picoA {pub: in};
    var Total_current: picoA;
    var ISAout: uA_per_mmsq {pub: out};
    var ISAout_atrium: uA_per_mmsq {pub: out};
    ISAout = sel
      case Total_current < -20{picoA}:
        -0.5{uA_per_mmsq};
      otherwise:
        0{uA_per_mmsq};
    endsel;
    ISAout_atrium = sel
      case (Total_current < -2{picoA}) and (Total_current > -3{picoA}) and (V < 0{millivolt}):
        -0.5{uA_per_mmsq};
      otherwise:
        0{uA_per_mmsq};
    endsel;
    Total_current = i_Na+i_K1+i_to+i_Kur+i_Kr+i_Ks+i_B_Na+i_B_Ca+i_NaK+i_CaP+i_NaCa+i_Ca_L+i_Ca_T+i_f+i_KACh;
    ode(V, time) = -Total_current/Cm;
  enddef;

  def comp fast_sodium_current as
    var i_Na: picoA {pub: out};
    var E_Na: millivolt {pub: out};
    var g_Na: nanoS_per_picoF {init: 0.234};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = Cm*g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
    E_Na = R*T/F*ln(Na_o/Na_i);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.901589232313455, pub: out};
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    var m_inf: dimensionless;
    var tau_m: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = sel
      case V == -47.13{millivolt}:
        3.2{per_millisecond};
      otherwise:
        0.32{per_millivolt_millisecond}*(V+47.13{millivolt})/(1{dimensionless}-exp(-0.1{per_millivolt}*(V+47.13{millivolt})));
    endsel;
    beta_m = 0.08{per_millisecond}*exp(-V/11{millivolt});
    m_inf = alpha_m/(alpha_m+beta_m);
    tau_m = 1{dimensionless}/(alpha_m+beta_m);
    ode(m, time) = (m_inf-m)/tau_m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 0, pub: out};
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var h_inf: dimensionless;
    var tau_h: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = sel
      case V < -40{millivolt}:
        0.135{per_millisecond}*exp((V+80{millivolt})/(-6.8{millivolt}));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40{millivolt}:
        3.56{per_millisecond}*exp(0.079{per_millivolt}*V)+3.1e5{per_millisecond}*exp(0.35{per_millivolt}*V);
      otherwise:
        1{dimensionless}/(0.13{millisecond}*(1{dimensionless}+exp((V+10.66{millivolt})/(-11.1{millivolt}))));
    endsel;
    h_inf = alpha_h/(alpha_h+beta_h);
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp fast_sodium_current_j_gate as
    var j: dimensionless {init: 5.85587871502196e-69, pub: out};
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    var j_inf: dimensionless;
    var tau_j: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_j = sel
      case V < -40{millivolt}:
        (-1.2714e5{per_millivolt_millisecond}*exp(0.2444{per_millivolt}*V)-3.474e-5{per_millivolt_millisecond}*exp(-0.04391{per_millivolt}*V))*(V+37.78{millivolt})/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt})));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40{millivolt}:
        0.1212{per_millisecond}*exp(-0.01052{per_millivolt}*V)/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt})));
      otherwise:
        0.3{per_millisecond}*exp(-2.535e-7{per_millivolt}*V)/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt})));
    endsel;
    j_inf = alpha_j/(alpha_j+beta_j);
    tau_j = 1{dimensionless}/(alpha_j+beta_j);
    ode(j, time) = (j_inf-j)/tau_j;
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: picoA {pub: out};
    var E_K: millivolt {pub: out};
    var g_K1: nanoS_per_picoF {init: 0.01665};
    var Cm: picoF {pub: in};
    var V: millivolt {pub: in};
    var K_o: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var K_i: millimolar {pub: in};
    E_K = R*T/F*ln(K_o/K_i);
    i_K1 = Cm*g_K1*(V-E_K)/(1{dimensionless}+exp(0.07{per_millivolt}*(V+80{millivolt})));
  enddef;

  def comp transient_outward_K_current as
    var i_to: picoA {pub: out};
    var K_Q10: dimensionless {init: 3, pub: out, priv: out};
    var g_to: nanoS_per_picoF {init: 0.009912};
    var Cm: picoF {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var oa: dimensionless {priv: in};
    var oi: dimensionless {priv: in};
    i_to = Cm*g_to*pow(oa, 3{dimensionless})*oi*(V-E_K);
  enddef;

  def comp transient_outward_K_current_oa_gate as
    var oa: dimensionless {init: 0.430553108241678, pub: out};
    var alpha_oa: per_millisecond;
    var beta_oa: per_millisecond;
    var tau_oa: millisecond;
    var oa_infinity: dimensionless;
    var K_Q10: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_oa = 0.65{per_millisecond}*pow(exp((V-(-10{millivolt}))/(-8.5{millivolt}))+exp((V-(-10{millivolt})-40{millivolt})/(-59{millivolt})), -1{dimensionless});
    beta_oa = 0.65{per_millisecond}*pow(2.5{dimensionless}+exp((V-(-10{millivolt})+72{millivolt})/17{millivolt}), -1{dimensionless});
    tau_oa = pow(alpha_oa+beta_oa, -1{dimensionless})/K_Q10;
    oa_infinity = pow(1{dimensionless}+exp((V-(-10{millivolt})+10.47{millivolt})/(-17.54{millivolt})), -1{dimensionless});
    ode(oa, time) = (oa_infinity-oa)/tau_oa;
  enddef;

  def comp transient_outward_K_current_oi_gate as
    var oi: dimensionless {init: 0.0242020122101775, pub: out};
    var alpha_oi: per_millisecond;
    var beta_oi: per_millisecond;
    var tau_oi: millisecond;
    var oi_infinity: dimensionless;
    var K_Q10: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_oi = pow(18.53{millisecond}+1{millisecond}*exp((V-(-10{millivolt})+103.7{millivolt})/10.95{millivolt}), -1{dimensionless});
    beta_oi = pow(35.56{millisecond}+1{millisecond}*exp((V-(-10{millivolt})-8.74{millivolt})/(-7.44{millivolt})), -1{dimensionless});
    tau_oi = pow(alpha_oi+beta_oi, -1{dimensionless})/K_Q10;
    oi_infinity = pow(1{dimensionless}+exp((V-(-10{millivolt})+33.1{millivolt})/5.3{millivolt}), -1{dimensionless});
    ode(oi, time) = (oi_infinity-oi)/tau_oi;
  enddef;

  def comp ultrarapid_delayed_rectifier_K_current as
    var i_Kur: picoA {pub: out};
    var g_Kur: nanoS_per_picoF;
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var K_Q10: dimensionless {pub: in, priv: out};
    var ua: dimensionless {priv: in};
    var ui: dimensionless {priv: in};
    g_Kur = (0.005{nanoS_per_picoF}+0.05{nanoS_per_picoF}/(1{dimensionless}+exp((V-15{millivolt})/(-13{millivolt}))))*0.13{dimensionless};
    i_Kur = Cm*g_Kur*pow(ua, 3{dimensionless})*ui*(V-E_K);
  enddef;

  def comp ultrarapid_delayed_rectifier_K_current_ua_gate as
    var ua: dimensionless {init: 0.625416278545545, pub: out};
    var alpha_ua: per_millisecond;
    var beta_ua: per_millisecond;
    var tau_ua: millisecond;
    var ua_infinity: dimensionless;
    var K_Q10: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_ua = 0.65{per_millisecond}*pow(exp((V-(-10{millivolt}))/(-8.5{millivolt}))+exp((V-(-10{millivolt})-40{millivolt})/(-59{millivolt})), -1{dimensionless});
    beta_ua = 0.65{per_millisecond}*pow(2.5{dimensionless}+exp((V-(-10{millivolt})+72{millivolt})/17{millivolt}), -1{dimensionless});
    tau_ua = pow(alpha_ua+beta_ua, -1{dimensionless})/K_Q10;
    ua_infinity = pow(1{dimensionless}+exp((V-(-10{millivolt})+20.3{millivolt})/(-9.6{millivolt})), -1{dimensionless});
    ode(ua, time) = (ua_infinity-ua)/tau_ua;
  enddef;

  def comp ultrarapid_delayed_rectifier_K_current_ui_gate as
    var ui: dimensionless {init: 0.976295453694032, pub: out};
    var alpha_ui: per_millisecond;
    var beta_ui: per_millisecond;
    var tau_ui: millisecond;
    var ui_infinity: dimensionless;
    var K_Q10: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_ui = pow(21{millisecond}+1{millisecond}*exp((V-(-10{millivolt})-195{millivolt})/(-28{millivolt})), -1{dimensionless});
    beta_ui = 1{per_millisecond}/exp((V-(-10{millivolt})-168{millivolt})/(-16{millivolt}));
    tau_ui = pow(alpha_ui+beta_ui, -1{dimensionless})/K_Q10;
    ui_infinity = pow(1{dimensionless}+exp((V-(-10{millivolt})-109.45{millivolt})/27.48{millivolt}), -1{dimensionless});
    ode(ui, time) = (ui_infinity-ui)/tau_ui;
  enddef;

  def comp rapid_delayed_rectifier_K_current as
    var i_Kr: picoA {pub: out};
    var g_Kr: nanoS_per_picoF {init: 0.0057615};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var xr: dimensionless {priv: in};
    i_Kr = Cm*g_Kr*xr*(V-E_K)/(1{dimensionless}+exp((V+15{millivolt})/22.4{millivolt}));
  enddef;

  def comp rapid_delayed_rectifier_K_current_xr_gate as
    var xr: dimensionless {init: 0.675224460789614, pub: out};
    var alpha_xr: per_millisecond;
    var beta_xr: per_millisecond;
    var tau_xr: millisecond;
    var xr_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_xr = sel
      case abs(V+14.1{millivolt}) < 1e-10{millivolt}:
        0.0015{per_millisecond};
      otherwise:
        0.0003{per_millivolt_millisecond}*(V+14.1{millivolt})/(1{dimensionless}-exp((V+14.1{millivolt})/(-5{millivolt})));
    endsel;
    beta_xr = sel
      case abs(V-3.3328{millivolt}) < 1e-10{millivolt}:
        3.7836118e-4{per_millisecond};
      otherwise:
        0.000073898{per_millivolt_millisecond}*(V-3.3328{millivolt})/(exp((V-3.3328{millivolt})/5.1237{millivolt})-1{dimensionless});
    endsel;
    tau_xr = pow(alpha_xr+beta_xr, -1{dimensionless});
    xr_infinity = pow(1{dimensionless}+exp((V+14.1{millivolt})/(-6.5{millivolt})), -1{dimensionless});
    ode(xr, time) = (xr_infinity-xr)/tau_xr;
  enddef;

  def comp slow_delayed_rectifier_K_current as
    var i_Ks: picoA {pub: out};
    var g_Ks: nanoS_per_picoF {init: 0.0064505};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var xs: dimensionless {priv: in};
    i_Ks = Cm*g_Ks*sqr(xs)*(V-E_K);
  enddef;

  def comp slow_delayed_rectifier_K_current_xs_gate as
    var xs: dimensionless {init: 0.266144350665511, pub: out};
    var alpha_xs: per_millisecond;
    var beta_xs: per_millisecond;
    var tau_xs: millisecond;
    var xs_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_xs = sel
      case abs(V-19.9{millivolt}) < 1e-10{millivolt}:
        0.00068{per_millisecond};
      otherwise:
        0.00004{per_millivolt_millisecond}*(V-19.9{millivolt})/(1{dimensionless}-exp((V-19.9{millivolt})/(-17{millivolt})));
    endsel;
    beta_xs = sel
      case abs(V-19.9{millivolt}) < 1e-10{millivolt}:
        0.000315{per_millisecond};
      otherwise:
        0.000035{per_millivolt_millisecond}*(V-19.9{millivolt})/(exp((V-19.9{millivolt})/9{millivolt})-1{dimensionless});
    endsel;
    tau_xs = 0.5{dimensionless}*pow(alpha_xs+beta_xs, -1{dimensionless});
    xs_infinity = pow(1{dimensionless}+exp((V-19.9{millivolt})/(-12.7{millivolt})), -0.5{dimensionless});
    ode(xs, time) = (xs_infinity-xs)/tau_xs;
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L: picoA {pub: out};
    var g_Ca_L: nanoS_per_picoF {init: 0.085};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ca_i: millimolar {pub: in, priv: out};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    i_Ca_L = Cm*g_Ca_L*d*f*f_Ca*(V-65{millivolt});
  enddef;

  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {init: 0.123573126723491, pub: out};
    var d_infinity: dimensionless;
    var tau_d: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    d_infinity = pow(1{dimensionless}+exp((V+10{millivolt})/(-8{millivolt})), -1{dimensionless});
    tau_d = sel
      case abs(V+10{millivolt}) < 1e-10{millivolt}:
        4.579{millisecond}/(1{dimensionless}+exp((V+10{millivolt})/(-6.24{millivolt})));
      otherwise:
        (1{dimensionless}-exp((V+10{millivolt})/(-6.24{millivolt})))/(0.035{per_millivolt_millisecond}*(V+10{millivolt})*(1{dimensionless}+exp((V+10{millivolt})/(-6.24{millivolt}))));
    endsel;
    ode(d, time) = (d_infinity-d)/tau_d;
  enddef;

  def comp L_type_Ca_channel_f_gate as
    var f: dimensionless {init: 0.202169843956322, pub: out};
    var f_infinity: dimensionless;
    var tau_f: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    f_infinity = exp(-(V+28{millivolt})/6.9{millivolt})/(1{dimensionless}+exp(-(V+28{millivolt})/6.9{millivolt}));
    tau_f = 9{millisecond}*pow(0.0197{dimensionless}*exp(-sqr(0.0337{per_millivolt})*sqr(V+10{millivolt}))+0.02{dimensionless}, -1{dimensionless});
    ode(f, time) = (f_infinity-f)/tau_f;
  enddef;

  def comp L_type_Ca_channel_f_Ca_gate as
    var f_Ca: dimensionless {init: 0.331673604593916, pub: out};
    var f_Ca_infinity: dimensionless;
    var tau_f_Ca: millisecond;
    var Ca_i: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    f_Ca_infinity = pow(1{dimensionless}+Ca_i/0.00035{millimolar}, -1{dimensionless});
    tau_f_Ca = 2{millisecond};
    ode(f_Ca, time) = (f_Ca_infinity-f_Ca)/tau_f_Ca;
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: picoA {pub: out};
    var Km_Na_i: millimolar {init: 10};
    var Km_K_o: millimolar {init: 1.5};
    var i_NaK_max: picoA_per_picoF {init: 0.3};
    var Cm: picoF {pub: in};
    var f_NaK: dimensionless;
    var sigma: dimensionless;
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Na_o/67.3{millimolar})-1{dimensionless});
    f_NaK = pow(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*F*V/(R*T))+0.0365{dimensionless}*sigma*exp(-F*V/(R*T)), -1{dimensionless});
    i_NaK = Cm*i_NaK_max*f_NaK*1{dimensionless}/(1{dimensionless}+pow(Km_Na_i/Na_i, 1.5{dimensionless}))*K_o/(K_o+Km_K_o);
  enddef;

  def comp background_currents as
    var i_B_Na: picoA {pub: out};
    var i_B_Ca: picoA {pub: out};
    var i_B_K: picoA {pub: out};
    var g_B_Na: nanoS_per_picoF {init: 0.000335};
    var g_B_Ca: nanoS_per_picoF {init: 0.0004565};
    var g_B_K: nanoS_per_picoF {init: 1e-5};
    var Cm: picoF {pub: in};
    var E_Ca: millivolt;
    var E_K: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    var V: millivolt {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Ca_o/Ca_i);
    i_B_Na = Cm*g_B_Na*(V-E_Na);
    i_B_Ca = Cm*g_B_Ca*(V-E_Ca);
    i_B_K = Cm*g_B_K*(V-E_K);
  enddef;

  def comp Na_Ca_exchanger_current as
    var i_NaCa: picoA {pub: out};
    var I_NaCa_max: picoA_per_picoF {init: 588.8};
    var Cm: picoF {pub: in};
    var K_mNa: millimolar {init: 87.5};
    var K_mCa: millimolar {init: 1.38};
    var K_sat: dimensionless {init: 0.1};
    var gamma: dimensionless {init: 0.35};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    i_NaCa = Cm*I_NaCa_max*(exp(gamma*F*V/(R*T))*pow(Na_i, 3{dimensionless})*Ca_o-exp((gamma-1{dimensionless})*F*V/(R*T))*pow(Na_o, 3{dimensionless})*Ca_i)/((pow(K_mNa, 3{dimensionless})+pow(Na_o, 3{dimensionless}))*(K_mCa+Ca_o)*(1{dimensionless}+K_sat*exp((gamma-1{dimensionless})*V*F/(R*T))));
  enddef;

  def comp sarcolemmal_calcium_pump_current as
    var i_CaP: picoA {pub: out};
    var i_CaP_max: picoA_per_picoF {init: 0.1375};
    var Cm: picoF {pub: in};
    var Ca_i: millimolar {pub: in};
    i_CaP = Cm*i_CaP_max*Ca_i/(0.0005{millimolar}+Ca_i);
  enddef;

  def comp Ca_release_current_from_JSR as
    var i_rel: millimolar_per_millisecond {pub: out};
    var Fn: dimensionless {priv: out};
    var K_rel: per_millisecond {init: 9.33};
    var V_rel: micrometre_3 {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ca_i: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var u: dimensionless {priv: in};
    var v: dimensionless {priv: in};
    var w: dimensionless {priv: in};
    Fn = 1e3{millisecond_per_millimolar}*(1e-15{per_micrometre_3}*V_rel*i_rel-1e-15{per_micrometre_3}/(2{dimensionless}*F)*(0.5{dimensionless}*i_Ca_L-0.2{dimensionless}*i_NaCa));
    i_rel = K_rel*sqr(u)*v*w*(Ca_rel-Ca_i);
  enddef;

  def comp Ca_release_current_from_JSR_u_gate as
    var u: dimensionless {init: -2.2569975184225e-35, pub: out};
    var tau_u: millisecond;
    var u_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var Fn: dimensionless {pub: in};
    tau_u = 8{millisecond};
    u_infinity = pow(1{dimensionless}+exp(-(Fn-3.4175e-13{dimensionless})/13.67e-16{dimensionless}), -1{dimensionless});
    ode(u, time) = (u_infinity-u)/tau_u;
  enddef;

  def comp Ca_release_current_from_JSR_v_gate as
    var v: dimensionless {init: 0.999999999999999, pub: out};
    var tau_v: millisecond;
    var v_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var Fn: dimensionless {pub: in};
    tau_v = 1.91{millisecond}+2.09{millisecond}*pow(1{dimensionless}+exp(-(Fn-3.4175e-13{dimensionless})/13.67e-16{dimensionless}), -1{dimensionless});
    v_infinity = 1{dimensionless}-pow(1{dimensionless}+exp(-(Fn-6.835e-14{dimensionless})/13.67e-16{dimensionless}), -1{dimensionless});
    ode(v, time) = (v_infinity-v)/tau_v;
  enddef;

  def comp Ca_release_current_from_JSR_w_gate as
    var w: dimensionless {init: 0.979607422520652, pub: out};
    var tau_w: millisecond;
    var w_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    tau_w = sel
      case abs(V-7.9{millivolt}) < 1e-10{millivolt}:
        6{millisecond}*0.2{dimensionless}/1.3{dimensionless};
      otherwise:
        6{millisecond}*(1{dimensionless}-exp(-(V-7.9{millivolt})/5{millivolt}))/((1{dimensionless}+0.3{dimensionless}*exp(-(V-7.9{millivolt})/5{millivolt}))*1{per_millivolt}*(V-7.9{millivolt}));
    endsel;
    w_infinity = 1{dimensionless}-pow(1{dimensionless}+exp(-(V-40{millivolt})/17{millivolt}), -1{dimensionless});
    ode(w, time) = (w_infinity-w)/tau_w;
  enddef;

  def comp transfer_current_from_NSR_to_JSR as
    var i_tr: millimolar_per_millisecond {pub: out};
    var tau_tr: millisecond {init: 180};
    var time: millisecond {pub: in};
    var Ca_rel: millimolar {pub: in};
    var Ca_up: millimolar {pub: in};
    i_tr = (Ca_up-Ca_rel)/tau_tr;
  enddef;

  def comp Ca_uptake_current_by_the_NSR as
    var I_up_max: millimolar_per_millisecond {init: 0.00152, pub: out};
    var i_up: millimolar_per_millisecond {pub: out};
    var K_up: millimolar {init: 0.00092};
    var time: millisecond {pub: in};
    var Ca_i: millimolar {pub: in};
    i_up = I_up_max/(1{dimensionless}+K_up/Ca_i);
  enddef;

  def comp Ca_leak_current_by_the_NSR as
    var i_up_leak: millimolar_per_millisecond {pub: out};
    var Ca_up_max: millimolar {init: 15};
    var time: millisecond {pub: in};
    var Ca_up: millimolar {pub: in};
    var I_up_max: millimolar_per_millisecond {pub: in};
    i_up_leak = I_up_max*Ca_up/Ca_up_max;
  enddef;

  def comp Ca_buffers as
    var CMDN_max: millimolar {init: 0.05, pub: out};
    var TRPN_max: millimolar {init: 0.07, pub: out};
    var CSQN_max: millimolar {init: 10, pub: out};
    var Km_CMDN: millimolar {init: 0.00238, pub: out};
    var Km_TRPN: millimolar {init: 0.0005, pub: out};
    var Km_CSQN: millimolar {init: 0.8, pub: out};
    var Ca_CMDN: millimolar;
    var Ca_TRPN: millimolar;
    var Ca_CSQN: millimolar;
    var time: millisecond {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    Ca_CMDN = CMDN_max*Ca_i/(Ca_i+Km_CMDN);
    Ca_TRPN = TRPN_max*Ca_i/(Ca_i+Km_TRPN);
    Ca_CSQN = CSQN_max*Ca_rel/(Ca_rel+Km_CSQN);
  enddef;

  def comp intracellular_ion_concentrations as
    var Na_i: millimolar {init: 10.4206812143853, pub: out};
    var Ca_i: millimolar {init: 0.00070499338653051, pub: out};
    var K_i: millimolar {init: 167.146227880574, pub: out};
    var Ca_rel: millimolar {init: 6.3028172139674, pub: out};
    var Ca_up: millimolar {init: 6.30546055912018, pub: out};
    var V_cell: micrometre_3 {init: 20100};
    var V_i: micrometre_3;
    var V_rel: micrometre_3 {pub: out};
    var V_up: micrometre_3;
    var B1: millimolar_per_millisecond;
    var B2: dimensionless;
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var i_NaK: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_Na: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_to: picoA {pub: in};
    var i_Kur: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_CaP: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    var i_B_K: picoA {pub: in};
    var i_up: millimolar_per_millisecond {pub: in};
    var i_up_leak: millimolar_per_millisecond {pub: in};
    var i_tr: millimolar_per_millisecond {pub: in};
    var i_rel: millimolar_per_millisecond {pub: in};
    var Km_CMDN: millimolar {pub: in};
    var Km_CSQN: millimolar {pub: in};
    var Km_TRPN: millimolar {pub: in};
    var CMDN_max: millimolar {pub: in};
    var CSQN_max: millimolar {pub: in};
    var TRPN_max: millimolar {pub: in};
    V_i = V_cell*0.68{dimensionless};
    V_rel = 0.0048{dimensionless}*V_cell;
    V_up = 0.0552{dimensionless}*V_cell;
    ode(Na_i, time) = (-3{dimensionless}*i_NaK-(3{dimensionless}*i_NaCa+i_B_Na+i_Na))/(V_i*F);
    ode(K_i, time) = (2{dimensionless}*i_NaK-(i_K1+i_to+i_Kur+i_Kr+i_Ks+i_B_K))/(V_i*F);
    ode(Ca_i, time) = B1/B2;
    B1 = (2{dimensionless}*i_NaCa-(i_CaP+i_Ca_L+i_B_Ca))/(2{dimensionless}*V_i*F)+(V_up*(i_up_leak-i_up)+i_rel*V_rel)/V_i;
    B2 = 1{dimensionless}+TRPN_max*Km_TRPN/sqr(Ca_i+Km_TRPN)+CMDN_max*Km_CMDN/sqr(Ca_i+Km_CMDN);
    ode(Ca_up, time) = i_up-(i_up_leak+i_tr*V_rel/V_up);
    ode(Ca_rel, time) = (i_tr-i_rel)*pow(1{dimensionless}+CSQN_max*Km_CSQN/sqr(Ca_rel+Km_CSQN), -1{dimensionless});
  enddef;

  def comp funny_current as
    var d_f: dimensionless {init: 0.162509736186646};
    var alpha_d_f: per_millisecond;
    var beta_d_f: per_millisecond;
    var d_f_infinity: dimensionless;
    var tau_d_f: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var i_f: picoA {pub: out};
    var g_f: nanoS_per_picoF {init: 0.075};
    var E_f: millivolt {init: -22};
    alpha_d_f = 0.36{per_millisecond}*(V+148.8{millivolt})/(exp(0.066{per_millivolt}*(V+148.8{millivolt}))-1{millivolt});
    beta_d_f = 0.1{per_millisecond}*(V+87.3{millivolt})/(1{millivolt}-exp(-0.21{millivolt}*(V+87.3{millivolt})));
    tau_d_f = 1{dimensionless}/(alpha_d_f+beta_d_f)-0.054{dimensionless};
    d_f_infinity = 1{dimensionless}/(alpha_d_f+beta_d_f);
    ode(d_f, time) = (d_f_infinity-d_f)/tau_d_f;
    i_f = g_f*d_f*(V-E_f);
  enddef;

  def comp T_type_Ca_channel as
    var i_Ca_T: picoA {pub: out};
    var g_Ca_T: nanoS_per_picoF {init: 0.10914};
    var E_Ca_T: millivolt {init: 45};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var d_T: dimensionless {priv: in};
    var f_T: dimensionless {priv: in};
    i_Ca_T = g_Ca_T*d_T*f_T*(V-E_Ca_T);
  enddef;

  def comp T_type_Ca_channel_d_gate as
    var d_T: dimensionless {init: 0.516044748800944, pub: out};
    var alpha_d_T: per_millisecond;
    var beta_d_T: per_millisecond;
    var d_T_infinity: dimensionless;
    var tau_d_T: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_d_T = 1068{per_millisecond}*exp((V+26.3{millivolt})/30{millivolt});
    beta_d_T = 1068{per_millisecond}*exp((V+26.3{millivolt})/(-30{millivolt}));
    tau_d_T = 1{dimensionless}/(alpha_d_T+beta_d_T);
    d_T_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+26.3{millivolt})/(-6{millivolt})));
    ode(d_T, time) = (d_T_infinity-d_T)/tau_d_T;
  enddef;

  def comp T_type_Ca_channel_f_gate as
    var f_T: dimensionless {init: 0.00167482510001593, pub: out};
    var alpha_f_T: per_millisecond;
    var beta_f_T: per_millisecond;
    var f_T_infinity: dimensionless;
    var tau_f_T: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_f_T = 15.3{per_millisecond}*exp((V+61.7{millivolt})/(-83.3{millivolt}));
    beta_f_T = 15{per_millisecond}*exp((V+61.7{millivolt})/15.38{millivolt});
    tau_f_T = 1{dimensionless}/(alpha_f_T+beta_f_T);
    f_T_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+61.7{millivolt})/5.6{millivolt}));
    ode(f_T, time) = (f_T_infinity-f_T)/tau_f_T;
  enddef;

  def comp standard_ionic_concentrations as
    var Na_o: millimolar {init: 140, pub: out};
    var Ca_o: millimolar {init: 1.8, pub: out};
    var K_o: millimolar {init: 5.4, pub: out};
  enddef;

  def comp ACh_dependent_potassium_current as
    var i_KACh: picoA {pub: out};
    var time: millisecond {pub: in, priv: out};
    var Vm: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var Cm: picoF {pub: in};
    var y: dimensionless {priv: in};
    var g_ACh: nanoS_per_picoF {init: 0.25};
    i_KACh = g_ACh*(Vm-E_K)/(1{dimensionless}+exp((Vm+20{millivolt})/20{millivolt}))*y;
  enddef;

  def comp ACh_dependent_potassium_current_y_gate as
    var y: dimensionless {init: 0.0174987351079082, pub: out};
    var alpha_y: per_millisecond;
    var beta_y: per_millisecond;
    var Vm: millivolt {pub: in};
    var ACh: millimolar {init: 0};
    var Km_ACh: millimolar {init: 0.0042};
    var time: millisecond {pub: in};
    alpha_y = sel
      case ACh == 0{millimolar}:
        0.0002475{per_millisecond};
      otherwise:
        0.01232{per_millisecond}/(1{dimensionless}+Km_ACh/ACh)+0.0002475{per_millisecond};
    endsel;
    beta_y = 0.01{per_millisecond}*exp(0.0133{per_millivolt}*(Vm+40{millivolt}));
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  def comp environment as
    var time: ms {pub: out};
    var HR: ratepm {init: 60, pub: out};
    var hrf: Hz {pub: out};
    hrf = 1000{dimensionless}/(HR/60{Hz2rpm});
  enddef;

  def comp LATiming as
    var realtime: ms {pub: in};
    var HR: ratepm {pub: in};
    var beattime: ms {pub: out};
    var hrf: Hz {pub: in};
    var ISAin: uA_per_mmsq {pub: in};
    var start: ms;
    start = sel
      case ISAin < 0{uA_per_mmsq}:
        realtime;
    endsel;
    beattime = (realtime-start-floor((realtime-start)/hrf)*hrf)/1000{dimensionless};
  enddef;

  def comp LAElastanceFunction as
    var time: ms {pub: in};
    var Esys: elastance {init: 0.365};
    var Edia: elastance {init: 0.231};
    var TsK: ms {init: 0.2};
    var Ts: ms;
    var hrf: Hz {pub: in};
    var E_LA: elastance {pub: out};
    Ts = TsK*sqrt(hrf/1000{Hz});
    E_LA = sel
      case (time >= 0{ms}) and (time <= Ts):
        Edia+(Esys-Edia)*(1{dimensionless}-cos(pi*time/Ts))/2{dimensionless};
      case (time < 1.5{dimensionless}*Ts) and (time >= Ts):
        Edia+(Esys-Edia)*(1{dimensionless}+cos(2{dimensionless}*pi*(time-Ts)/Ts))/2{dimensionless};
      otherwise:
        Edia;
    endsel;
  enddef;

  def comp LeftAtrium as
    var time: ms {pub: in};
    var E_LA: elastance {pub: in};
    var P_PV: mmHg {pub: in};
    var F_LV: flow {pub: in};
    var P_LA_ext: mmHg {init: 0};
    var V_LA: mL {init: 114.382943360704, pub: out};
    var V_LA_0: mL {init: 100};
    var P_LA: mmHg {pub: out};
    var F_LA: flow {pub: out};
    var R_LA: CVresistance {init: 0.01};
    var conc_X_LA: concentration {pub: out};
    var conc_X_PV: concentration {pub: in};
    var sub_X_LA: mL {init: 0};
    ode(sub_X_LA, time) = (conc_X_PV*F_LA-conc_X_LA*F_LV)/1000{dimensionless};
    conc_X_LA = sub_X_LA/V_LA;
    P_LA = E_LA*(V_LA-V_LA_0)+P_LA_ext;
    F_LA = (P_PV-P_LA)/R_LA;
    ode(V_LA, time) = (F_LA-F_LV)/1000{dimensionless};
  enddef;

  def comp LeftVentricle as
    var time: ms {pub: in};
    var F_AO: flow {pub: in};
    var F_CO: flow {pub: in};
    var P_LA: mmHg {pub: in};
    var pLVPext: mmHg {init: 0};
    var V_LV: mL {init: 46.5361989930178, pub: out};
    var V_LV_0: mL {init: 30};
    var P_LVin: mmHg {pub: in};
    var F_LV: flow {pub: out};
    var R_LV: CVresistance {init: 0.01};
    var conc_X_LV: concentration {pub: out};
    var conc_X_LA: concentration {pub: in};
    var sub_X_LV: mL {init: 0};
    var P_LV: mmHg;
    var P_LA_ext: mmHg {init: 0};
    P_LV = P_LVin+P_LA_ext;
    ode(sub_X_LV, time) = (conc_X_LA*F_LV-conc_X_LV*(F_AO+F_CO))/1000{dimensionless};
    conc_X_LV = sub_X_LV/V_LV;
    F_LV = sel
      case P_LA > P_LV:
        (P_LA-P_LV)/R_LV;
      otherwise:
        0{flow};
    endsel;
    ode(V_LV, time) = (F_LV-F_AO-F_CO)/1000{dimensionless};
  enddef;

  def comp Aorta as
    var time: ms {pub: in};
    var F_CR: flow {pub: in};
    var P_LV: mmHg {pub: in};
    var F_AR: flow {pub: in};
    var C_AO: capacitance {init: 1};
    var L_AO: inductance {init: 5e-5};
    var R_AO: CVresistance {init: 0.15};
    var V_AO_0: mL {init: 100};
    var V_AO: mL {init: 177.532128748274, pub: out};
    var F_AOalways: flow {init: -504.430041148081};
    var F_AO: flow {pub: out};
    var P_AO: mmHg {pub: out};
    var conc_X_AO: concentration {pub: out};
    var conc_X_LV: concentration {pub: in};
    var sub_X_AO: mL {init: 0};
    ode(sub_X_AO, time) = (conc_X_LV*F_AO-conc_X_AO*(F_CR+F_AR))/1000{dimensionless};
    conc_X_AO = sub_X_AO/V_AO;
    ode(F_AOalways, time) = (1{dimensionless}/L_AO*(P_LV-P_AO)-R_AO/L_AO*F_AOalways)/1000{dimensionless};
    F_AO = sel
      case P_LV > P_AO:
        F_AOalways;
      otherwise:
        0{flow};
    endsel;
    ode(V_AO, time) = (F_AO-F_AR-F_CR)/1000{dimensionless};
    P_AO = 1{dimensionless}/C_AO*(V_AO-V_AO_0);
  enddef;

  def comp CoronaryCirc as
    var time: ms {pub: in};
    var P_LV: mmHg {pub: in};
    var P_RA: mmHg {pub: in};
    var R_CO: CVresistance {init: 8};
    var R_COV: CVresistance {init: 2.5};
    var V_CO_0: mL {init: 15};
    var C_CO: capacitance {init: 0.75};
    var F_CO: flow {pub: out};
    var F_COV: flow {pub: out};
    var V_CO: mL {init: 24.930759461586, pub: out};
    var P_CO: mmHg {pub: out};
    var conc_X_CO: concentration {pub: out};
    var conc_X_LV: concentration {pub: in};
    var sub_X_CO: mL {init: 0};
    ode(sub_X_CO, time) = (conc_X_LV*F_CO-conc_X_CO*F_COV)/1000{dimensionless};
    conc_X_CO = sub_X_CO/V_CO;
    ode(V_CO, time) = (F_CO-F_COV)/1000{dimensionless};
    P_CO = 1{dimensionless}/C_CO*(V_CO-V_CO_0);
    F_CO = sel
      case P_LV > P_CO:
        (P_LV-P_CO)/R_CO;
      otherwise:
        0{flow};
    endsel;
    F_COV = (P_CO-P_RA)/R_COV;
  enddef;

  def comp CarotidCirc as
    var time: ms {pub: in};
    var P_AO: mmHg {pub: in};
    var P_VC: mmHg {pub: in};
    var R_CR: CVresistance {init: 11};
    var R_CRV: CVresistance {init: 4};
    var V_CR_0: mL {init: 30};
    var C_CR: capacitance {init: 3};
    var F_CR: flow {pub: out};
    var F_CRV: flow {pub: out};
    var V_CR: mL {init: 97.7894953935923, pub: out};
    var P_CR: mmHg {pub: out};
    var conc_X_CR: concentration {pub: out};
    var conc_X_AO: concentration {pub: in};
    var sub_X_CR: mL {init: 0};
    var conc_X_CRtissue: concentration;
    var D_CRtissue: flow {init: 1};
    var V_CRtissue: mL {init: 1};
    var sub_X_CRtissue: mL {init: 0};
    conc_X_CRtissue = sub_X_CRtissue/V_CRtissue;
    ode(sub_X_CRtissue, time) = (conc_X_CR-conc_X_CRtissue)*D_CRtissue/1000{dimensionless};
    ode(sub_X_CR, time) = (conc_X_AO*F_CR-conc_X_CR*F_CRV-(conc_X_CR-conc_X_CRtissue)*D_CRtissue)/1000{dimensionless};
    conc_X_CR = sub_X_CR/V_CR;
    ode(V_CR, time) = (F_CR-F_CRV)/1000{dimensionless};
    P_CR = 1{dimensionless}/C_CR*(V_CR-V_CR_0);
    F_CR = (P_AO-P_CR)/R_CR;
    F_CRV = (P_CR-P_VC)/R_CRV;
  enddef;

  def comp Arteries as
    var time: ms {pub: in};
    var F_AD: flow {pub: in};
    var F_MU: flow {pub: in};
    var F_GI: flow {pub: in};
    var F_LI: flow {pub: in};
    var F_KI: flow {pub: in};
    var F_OT: flow {pub: in};
    var F_SK: flow {pub: in};
    var P_AO: mmHg {pub: in};
    var R_AR: CVresistance {init: 1.5};
    var C_AR: capacitance {init: 0.5};
    var V_AR_0: mL {init: 370};
    var V_AR: mL {init: 377.822162330503, pub: out};
    var F_AR: flow {pub: out};
    var P_AR: mmHg {pub: out};
    var conc_X_AR: concentration {pub: out};
    var conc_X_AO: concentration {pub: in};
    var sub_X_AR: mL {init: 10};
    ode(sub_X_AR, time) = (conc_X_AO*F_AR-conc_X_AR*(F_SK+F_AD+F_MU+F_GI+F_LI+F_KI+F_OT))/1000{dimensionless};
    conc_X_AR = sub_X_AR/V_AR;
    ode(V_AR, time) = (F_AR-F_AD-F_MU-F_GI-F_LI-F_KI-F_OT-F_SK)/1000{dimensionless};
    P_AR = 1{dimensionless}/C_AR*(V_AR-V_AR_0);
    F_AR = (P_AO-P_AR)/R_AR;
  enddef;

  def comp Adipose as
    var time: ms {pub: in};
    var P_AR: mmHg {pub: in};
    var P_VE: mmHg {pub: in};
    var C_AD: capacitance {init: 30};
    var R_AD: CVresistance {init: 1.2};
    var R_ADV: CVresistance {init: 1};
    var V_AD_0: mL {init: 225};
    var V_AD: mL {init: 539.300411354071, pub: out};
    var F_AD: flow {pub: out};
    var F_ADV: flow {pub: out};
    var P_AD: mmHg {pub: out};
    var conc_X_AD: concentration {pub: out};
    var conc_X_AR: concentration {pub: in};
    var sub_X_AD: mL {init: 0};
    ode(sub_X_AD, time) = (conc_X_AR*F_AD-conc_X_AD*F_ADV)/1000{dimensionless};
    conc_X_AD = sub_X_AD/V_AD;
    ode(V_AD, time) = (F_AD-F_ADV)/1000{dimensionless};
    F_ADV = (P_AD-P_VE)/R_ADV;
    P_AD = 1{dimensionless}/C_AD*(V_AD-V_AD_0);
    F_AD = (P_AR-P_AD)/R_AD;
  enddef;

  def comp Muscle as
    var time: ms {pub: in};
    var P_AR: mmHg {pub: in};
    var P_VE: mmHg {pub: in};
    var C_MU: capacitance {init: 60};
    var R_MU: CVresistance {init: 0.9};
    var R_MUV: CVresistance {init: 0.33};
    var V_MU_0: mL {init: 1300};
    var V_MU: mL {init: 1843.97747354682, pub: out};
    var F_MU: flow {pub: out};
    var F_MUV: flow {pub: out};
    var P_MU: mmHg {pub: out};
    var conc_X_MU: concentration {pub: out};
    var conc_X_AR: concentration {pub: in};
    var sub_X_MU: mL {init: 0};
    ode(sub_X_MU, time) = (conc_X_AR*F_MU-conc_X_MU*F_MUV)/1000{dimensionless};
    conc_X_MU = sub_X_MU/V_MU;
    ode(V_MU, time) = (F_MU-F_MUV)/1000{dimensionless};
    F_MUV = (P_MU-P_VE)/R_MUV;
    P_MU = 1{dimensionless}/C_MU*(V_MU-V_MU_0);
    F_MU = (P_AR-P_MU)/R_MU;
  enddef;

  def comp GutIntestine as
    var time: ms {pub: in};
    var P_AR: mmHg {pub: in};
    var P_LI: mmHg {pub: in};
    var C_GI: capacitance {init: 1.81};
    var R_GI: CVresistance {init: 0.6};
    var R_GIV: CVresistance {init: 0.15};
    var V_GI_0: mL {init: 75};
    var V_GI: mL {init: 95.4041027167494, pub: out};
    var F_GI: flow {pub: out};
    var F_GIV: flow {pub: out};
    var P_GI: mmHg {pub: out};
    var conc_X_GI: concentration {pub: out};
    var conc_X_AR: concentration {pub: in};
    var sub_X_GI: mL {init: 0};
    ode(sub_X_GI, time) = (conc_X_AR*F_GI-conc_X_GI*F_GIV)/1000{dimensionless};
    conc_X_GI = sub_X_GI/V_GI;
    ode(V_GI, time) = (F_GI-F_GIV)/1000{dimensionless};
    F_GIV = (P_GI-P_LI)/R_GIV;
    P_GI = 1{dimensionless}/C_GI*(V_GI-V_GI_0);
    F_GI = (P_AR-P_GI)/R_GI;
  enddef;

  def comp Liver as
    var time: ms {pub: in};
    var P_AR: mmHg {pub: in};
    var P_VE: mmHg {pub: in};
    var C_LI: capacitance {init: 1.81};
    var R_LI: CVresistance {init: 0.9};
    var R_LIV: CVresistance {init: 0.33};
    var V_LI_0: mL {init: 75};
    var V_LI: mL {init: 93.8781911234713, pub: out};
    var F_LI: flow {pub: out};
    var F_GIV: flow {pub: in};
    var F_LIV: flow {pub: out};
    var P_LI: mmHg {pub: out};
    var conc_X_LI: concentration {pub: out};
    var conc_X_AR: concentration {pub: in};
    var conc_X_GI: concentration {pub: in};
    var sub_X_LI: mL {init: 0};
    var metabolism: flow {init: 0};
    ode(sub_X_LI, time) = (conc_X_GI*F_GIV+conc_X_AR*F_LI-conc_X_LI*F_LIV+conc_X_LI*metabolism)/1000{dimensionless};
    conc_X_LI = sub_X_LI/V_LI;
    ode(V_LI, time) = (F_GIV+F_LI-F_LIV)/1000{dimensionless};
    F_LIV = (P_LI-P_VE)/R_LIV;
    P_LI = 1{dimensionless}/C_LI*(V_LI-V_LI_0);
    F_LI = (P_AR-P_LI)/R_LI;
  enddef;

  def comp Kidney as
    var time: ms {pub: in};
    var P_AR: mmHg {pub: in};
    var P_VE: mmHg {pub: in};
    var C_KI: capacitance {init: 0.5};
    var R_KI: CVresistance {init: 0.8};
    var V_KI_0: mL {init: 20};
    var R_KIV: CVresistance {init: 0.2};
    var V_KI: mL {init: 24.4012692216718, pub: out};
    var F_KI: flow {pub: out};
    var F_KIV: flow {pub: out};
    var P_KI: mmHg {pub: out};
    var conc_X_KI: concentration {pub: out};
    var conc_X_AR: concentration {pub: in};
    var sub_X_KI: mL {init: 0};
    ode(sub_X_KI, time) = (conc_X_AR*F_KI-conc_X_KI*F_KIV)/1000{dimensionless};
    conc_X_KI = sub_X_KI/V_KI;
    ode(V_KI, time) = (F_KI-F_KIV)/1000{dimensionless};
    F_KIV = (P_KI-P_VE)/R_KIV;
    P_KI = 1{dimensionless}/C_KI*(V_KI-V_KI_0);
    F_KI = (P_AR-P_KI)/R_KI;
  enddef;

  def comp Skin as
    var time: ms {pub: in};
    var P_AR: mmHg {pub: in};
    var P_VE: mmHg {pub: in};
    var C_SK: capacitance {init: 1.81};
    var R_SK: CVresistance {init: 2.8};
    var R_SKV: CVresistance {init: 0.7};
    var V_SK_0: mL {init: 200};
    var V_SK: mL {init: 215.48053377869, pub: out};
    var F_SK: flow {pub: out};
    var F_SKV: flow {pub: out};
    var P_SK: mmHg {pub: out};
    var conc_X_SK: concentration {pub: out};
    var conc_X_AR: concentration {pub: in};
    var sub_X_SK: mL {init: 0};
    ode(sub_X_SK, time) = (conc_X_AR*F_SK-conc_X_SK*F_SKV)/1000{dimensionless};
    conc_X_SK = sub_X_SK/V_SK;
    ode(V_SK, time) = (F_SK-F_SKV)/1000{dimensionless};
    F_SKV = (P_SK-P_VE)/R_SKV;
    P_SK = 1{dimensionless}/C_SK*(V_SK-V_SK_0);
    F_SK = (P_AR-P_SK)/R_SK;
  enddef;

  def comp OtherTissue as
    var time: ms {pub: in};
    var P_AR: mmHg {pub: in};
    var P_VE: mmHg {pub: in};
    var C_OT: capacitance {init: 1.81};
    var R_OT: CVresistance {init: 1};
    var R_OTV: CVresistance {init: 0.33};
    var V_OT_0: mL {init: 75};
    var V_OT: mL {init: 91.1860503601169, pub: out};
    var F_OT: flow {pub: out};
    var F_OTV: flow {pub: out};
    var P_OT: mmHg {pub: out};
    var conc_X_OT: concentration {pub: out};
    var conc_X_AR: concentration {pub: in};
    var sub_X_OT: mL {init: 0};
    ode(sub_X_OT, time) = (conc_X_AR*F_OT-conc_X_OT*F_OTV)/1000{dimensionless};
    conc_X_OT = sub_X_OT/V_OT;
    ode(V_OT, time) = (F_OT-F_OTV)/1000{dimensionless};
    F_OTV = (P_OT-P_VE)/R_OTV;
    P_OT = 1{dimensionless}/C_OT*(V_OT-V_OT_0);
    F_OT = (P_AR-P_OT)/R_OT;
  enddef;

  def comp Veins as
    var time: ms {pub: in};
    var F_ADV: flow {pub: in};
    var F_MUV: flow {pub: in};
    var F_LIV: flow {pub: in};
    var F_KIV: flow {pub: in};
    var F_OTV: flow {pub: in};
    var F_SKV: flow {pub: in};
    var P_VC: mmHg {pub: in};
    var R_VEV: CVresistance {init: 0.0223};
    var V_VE: mL {init: 457.346412168043, pub: out};
    var C_VE: capacitance {init: 8};
    var V_VE_0: mL {init: 400};
    var F_VE: flow {pub: out};
    var F_VEV: flow {pub: out};
    var P_VE: mmHg {pub: out};
    var conc_X_VE: concentration {pub: out};
    var conc_X_AD: concentration {pub: in};
    var conc_X_MU: concentration {pub: in};
    var conc_X_LI: concentration {pub: in};
    var conc_X_KI: concentration {pub: in};
    var conc_X_SK: concentration {pub: in};
    var conc_X_OT: concentration {pub: in};
    var sub_X_VE: mL {init: 0};
    ode(sub_X_VE, time) = (conc_X_SK*F_SKV+conc_X_AD*F_ADV+conc_X_MU*F_MUV+conc_X_LI*F_LIV+conc_X_KI*F_KIV+conc_X_OT*F_OTV-conc_X_VE*F_VEV)/1000{dimensionless};
    conc_X_VE = sub_X_VE/V_VE;
    F_VE = F_SKV+F_ADV+F_MUV+F_LIV+F_KIV+F_OTV;
    ode(V_VE, time) = (F_VE-F_VEV)/1000{dimensionless};
    P_VE = 1{dimensionless}/C_VE*(V_VE-V_VE_0);
    F_VEV = (P_VE-P_VC)/R_VEV;
  enddef;

  def comp VenaCava as
    var time: ms {pub: in};
    var F_VEV: flow {pub: in};
    var P_RA: mmHg {pub: in};
    var F_CRV: flow {pub: in};
    var R_VCV: CVresistance {init: 0.00267};
    var V_VC: mL {init: 629.887803989648, pub: out};
    var V_VC_0: mL {init: 500};
    var C_VC: capacitance {init: 20};
    var F_VC: flow {pub: out};
    var F_VCV: flow {pub: out};
    var P_VC: mmHg {pub: out};
    var conc_X_VC: concentration {pub: out};
    var conc_X_VE: concentration {pub: in};
    var conc_X_CR: concentration {pub: in};
    var sub_X_VC: mL {init: 0};
    ode(sub_X_VC, time) = (conc_X_VE*F_VEV+conc_X_CR*F_CRV-conc_X_VC*F_VCV)/1000{dimensionless};
    conc_X_VC = sub_X_VC/V_VC;
    F_VC = F_CRV+F_VEV;
    F_VCV = (P_VC-P_RA)/R_VCV;
    ode(V_VC, time) = (F_VC-F_VCV)/1000{dimensionless};
    P_VC = 1{dimensionless}/C_VC*(V_VC-V_VC_0);
  enddef;

  def comp RATiming as
    var realtime: ms {pub: in};
    var HR: ratepm {pub: in};
    var beattime: ms {pub: out};
    var hrf: Hz {pub: in};
    var ISAin: uA_per_mmsq {pub: in};
    var start: ms;
    start = sel
      case ISAin < 0{uA_per_mmsq}:
        realtime;
    endsel;
    beattime = (realtime-start-floor((realtime-start)/hrf)*hrf)/1000{dimensionless};
  enddef;

  def comp RAElastanceFunction as
    var time: ms {pub: in};
    var Esys: elastance {init: 0.11};
    var Edia: elastance {init: 0.099};
    var TsK: second {init: 0.2};
    var Ts: second;
    var hrf: Hz {pub: in};
    var E_RA: elastance {pub: out};
    Ts = TsK*sqrt(hrf/1000{Hz});
    E_RA = sel
      case (time >= 0{second}) and (time <= Ts):
        Edia+(Esys-Edia)*(1{dimensionless}-cos(pi*time/Ts))/2{dimensionless};
      case (time < 1.5{dimensionless}*Ts) and (time >= Ts):
        Edia+(Esys-Edia)*(1{dimensionless}+cos(2{dimensionless}*pi*(time-Ts)/Ts))/2{dimensionless};
      otherwise:
        Edia;
    endsel;
  enddef;

  def comp RightAtrium as
    var time: ms {pub: in};
    var E_RA: elastance {pub: in};
    var F_RV: flow {pub: in};
    var F_VCV: flow {pub: in};
    var F_COV: flow {pub: in};
    var P_RA_ext: mmHg {init: 0};
    var V_RA: mL {init: 78.8296697240886, pub: out};
    var V_RA_0: mL {init: 15};
    var P_RA: mmHg {pub: out};
    var F_RA: flow {pub: out};
    var conc_X_RA: concentration {pub: out};
    var conc_X_VC: concentration {pub: in};
    var conc_X_CO: concentration {pub: in};
    var sub_X_RA: mL {init: 0};
    ode(sub_X_RA, time) = (conc_X_VC*F_VCV+conc_X_CO*F_COV-conc_X_RA*F_RV)/1000{dimensionless};
    conc_X_RA = sub_X_RA/V_RA;
    P_RA = E_RA*(V_RA-V_RA_0)+P_RA_ext;
    F_RA = F_VCV+F_COV;
    ode(V_RA, time) = (F_RA-F_RV)/1000{dimensionless};
  enddef;

  def comp RightVentricle as
    var time: ms {pub: in};
    var P_RA: mmHg {pub: in};
    var F_PA: flow {pub: in};
    var P_RV_ext: mmHg {init: 0};
    var V_RV: mL {init: 120.130190319487, pub: out};
    var V_RV_0: mL {init: 25};
    var P_RV: mmHg {pub: out};
    var F_RV: flow {pub: out};
    var R_RV: CVresistance {init: 0.02};
    var conc_X_RV: concentration {pub: out};
    var conc_X_RA: concentration {pub: in};
    var sub_X_RV: mL {init: 0};
    var EmaxLV: elastance {init: 3.6};
    var EmaxRV: elastance {init: 1.75};
    var kelv: per_mL {init: 0.014};
    var kerv: per_mL {init: 0.011};
    var P0lv: mmHg {init: 1.5};
    var P0rv: mmHg {init: 1.5};
    var lva: mmHg;
    var rva: mmHg;
    var lvb: mmHg;
    var rvb: mmHg;
    var P_LV: mmHg {pub: in};
    var V_LV: mL {pub: in};
    lva = EmaxLV*10{mL};
    rva = EmaxRV*10{mL};
    lvb = P0lv*(exp(kelv*V_LV)-1{dimensionless});
    rvb = P0rv*(exp(kerv*V_RV)-1{dimensionless});
    P_RV = (P_LV-lvb)*rva/(lva-lvb)+(lva-P_LV)*rvb/(lva-lvb);
    ode(sub_X_RV, time) = (conc_X_RA*F_RV-conc_X_RV*F_PA)/1000{dimensionless};
    conc_X_RV = sub_X_RV/V_RV;
    F_RV = sel
      case P_RA > P_RV:
        (P_RA-P_RV)/R_RV;
      otherwise:
        0{flow};
    endsel;
    ode(V_RV, time) = (F_RV-F_PA)/1000{dimensionless};
  enddef;

  def comp PulmonaryArtery as
    var time: ms {pub: in};
    var F_Pa: flow {pub: in};
    var P_RV: mmHg {pub: in};
    var R_PA: CVresistance {init: 0.2};
    var C_PA: capacitance {init: 1};
    var V_PA_0: mL {init: 50};
    var F_PA: flow {pub: out};
    var V_PA: mL {init: 56.0809022882693, pub: out};
    var P_PA: mmHg {pub: out};
    var conc_X_PA: concentration {pub: out};
    var conc_X_RV: concentration {pub: in};
    var sub_X_PA: mL {init: 0};
    ode(sub_X_PA, time) = (conc_X_RV*F_PA-conc_X_PA*F_Pa)/1000{dimensionless};
    conc_X_PA = sub_X_PA/V_PA;
    F_PA = sel
      case P_RV > P_PA:
        (P_RV-P_PA)/R_PA;
      otherwise:
        0{flow};
    endsel;
    ode(V_PA, time) = (F_PA-F_Pa)/1000{dimensionless};
    P_PA = 1{dimensionless}/C_PA*(V_PA-V_PA_0);
  enddef;

  def comp PulmonaryArteries as
    var time: ms {pub: in};
    var P_PA: mmHg {pub: in};
    var F_PC: flow {pub: in};
    var F_SH: flow {pub: in};
    var V_Pa: mL {init: 37.3085495287075, pub: out};
    var C_Pa: capacitance {init: 1.481};
    var R_Pa: CVresistance {init: 0.053};
    var V_Pa_0: mL {init: 30};
    var F_Pa: flow {pub: out};
    var P_Pa: mmHg {pub: out};
    var conc_X_Pa: concentration {pub: out};
    var conc_X_PA: concentration {pub: in};
    var sub_X_Pa: mL {init: 0};
    ode(sub_X_Pa, time) = (conc_X_PA*F_Pa-conc_X_Pa*(F_PC+F_SH))/1000{dimensionless};
    conc_X_Pa = sub_X_Pa/V_Pa;
    ode(V_Pa, time) = (F_Pa-F_PC-F_SH)/1000{dimensionless};
    P_Pa = 1{dimensionless}/C_Pa*(V_Pa-V_Pa_0);
    F_Pa = (P_PA-P_Pa)/R_Pa;
  enddef;

  def comp Shunt as
    var time: ms {pub: in};
    var R_SH: CVresistance {init: 50000000000};
    var F_SH: flow {pub: out};
    var P_Pa: mmHg {pub: in};
    var P_PC: mmHg {pub: in};
    F_SH = (P_Pa-P_PC)/R_SH;
  enddef;

  def comp PulmonaryCapillaries as
    var time: ms {pub: in};
    var P_Pa: mmHg {pub: in};
    var P_PV: mmHg {pub: in};
    var C_PC: capacitance {init: 1.778};
    var R_PC: CVresistance {init: 0.0179};
    var R_PCV: CVresistance {init: 0.0079};
    var V_PC_0: mL {init: 53};
    var V_PC: mL {init: 60.6769769228579, pub: out};
    var F_PC: flow {pub: out};
    var F_PCV: flow {pub: out};
    var P_PC: mmHg {pub: out};
    var conc_X_PC: concentration {pub: out};
    var conc_X_Pa: concentration {pub: in};
    var sub_X_PC: mL {init: 0};
    ode(sub_X_PC, time) = (conc_X_Pa*F_PC-conc_X_PC*F_PCV)/1000{dimensionless};
    conc_X_PC = sub_X_PC/V_PC;
    ode(V_PC, time) = (F_PC-F_PCV)/1000{dimensionless};
    P_PC = 1{dimensionless}/C_PC*(V_PC-V_PC_0);
    F_PC = (P_Pa-P_PC)/R_PC;
    F_PCV = (P_PC-P_PV)/R_PCV;
  enddef;

  def comp PulmonaryVein as
    var time: ms {pub: in};
    var F_PCV: flow {pub: in};
    var F_SH: flow {pub: in};
    var F_LA: flow {pub: in};
    var C_PV: capacitance {init: 2};
    var V_PV_0: mL {init: 70};
    var V_PV: mL {init: 77.9150700144446, pub: out};
    var F_PV: flow {pub: out};
    var P_PV: mmHg {pub: out};
    var conc_X_PV: concentration {pub: out};
    var conc_X_PC: concentration {pub: in};
    var conc_X_Pa: concentration {pub: in};
    var sub_X_PV: mL {init: 0};
    ode(sub_X_PV, time) = (conc_X_PC*F_PCV+conc_X_Pa*F_SH-conc_X_PV*F_LA)/1000{dimensionless};
    conc_X_PV = sub_X_PV/V_PV;
    F_PV = F_PCV+F_SH;
    ode(V_PV, time) = (F_PV-F_LA)/1000{dimensionless};
    P_PV = 1{dimensionless}/C_PV*(V_PV-V_PV_0);
  enddef;

  def comp additional_currents as
    var IK_additional: uA_per_mmsq {pub: out};
    var ICa_additional: uA_per_mmsq {pub: out};
    var INa_additional: uA_per_mmsq {init: 0, pub: out};
    var JCaSR_additional: mM_per_ms {init: 0, pub: out};
    var Istim: uA_per_mmsq {init: 0, pub: out};
    var Cai: uA_per_mmsq {pub: in};
    var topOUt: uA_per_mmsq {init: -0.00063};
    ICa_additional = topOUt-Cai;
    IK_additional = -Istim;
  enddef;

  def comp default_parameters as
    var Am: per_mm {init: 200, pub: out};
    var Cm: uF_per_mmsq {init: 0.01, pub: out};
    var Capacitance: uF_per_mmsq {init: 0.00185, pub: out};
    var temperature: K {init: 310, pub: out};
    var vC: dimensionless {init: 0.49, pub: out};
    var vSR: dimensionless {init: 0.1, pub: out};
    var g_Na: mS_per_mmsq {init: 0.14838, pub: out};
    var g_K1: mS_per_mmsq {init: 0.05405, pub: out};
    var g_to: mS_per_mmsq {init: 0.00294, pub: out};
    var g_Kr: mS_per_mmsq {init: 0.00096, pub: out};
    var g_Ks: mS_per_mmsq {init: 0.00245, pub: out};
    var g_pK: mS_per_mmsq {init: 0.000146, pub: out};
    var g_bNa: mS_per_mmsq {init: 2.9e-6, pub: out};
    var g_bCa: mS_per_mmsq {init: 5.92e-6, pub: out};
    var p_KNa: dimensionless {init: 0.03, pub: out};
    var P_NaK: uA_per_mmsq {init: 0.01362, pub: out};
    var K_mNa: mM {init: 40, pub: out};
    var K_mK: mM {init: 1, pub: out};
    var g_CaL: mm_per_ms {init: 1.75e-6, pub: out};
    var Bufc: mM {init: 0.14, pub: out};
    var Kbufc: mM {init: 0.001, pub: out};
    var Bufsr: mM {init: 10, pub: out};
    var Kbufsr: mM {init: 0.3, pub: out};
    var Nao: mM {init: 140, pub: out};
    var Ko: mM {init: 5.4, pub: out};
    var Cao: mM {init: 2, pub: out};
    var V_leak: per_ms {init: 8e-5, pub: out};
    var K_up: mM {init: 0.00025, pub: out};
    var Vmax_up: mM_per_ms {init: 0.000425, pub: out};
    var a_rel: mM_per_ms {init: 0.016464, pub: out};
    var b_rel: mM {init: 0.25, pub: out};
    var c_rel: mM_per_ms {init: 0.008232, pub: out};
    var tau_g: ms {init: 2, pub: out};
    var g_pCa: uA_per_mmsq {init: 0.00825, pub: out};
    var K_pCa: mM {init: 0.0005, pub: out};
    var k_NaCa: uA_per_mmsq {init: 10, pub: out};
    var K_mNai: mM {init: 87.5, pub: out};
    var K_mCa: mM {init: 1.38, pub: out};
    var k_sat: dimensionless {init: 0.1, pub: out};
    var gamma: dimensionless {init: 0.35, pub: out};
    var alpha: dimensionless {init: 2.5, pub: out};
  enddef;

  def comp default_initial_conditions as
    var V_initial: mV {init: -86.2, pub: out};
    var m_initial: dimensionless {init: 0, pub: out};
    var h_initial: dimensionless {init: 0.75, pub: out};
    var j_initial: dimensionless {init: 0.75, pub: out};
    var s_initial: dimensionless {init: 1, pub: out};
    var r_initial: dimensionless {init: 0, pub: out};
    var Xr1_initial: dimensionless {init: 0, pub: out};
    var Xr2_initial: dimensionless {init: 1, pub: out};
    var Xs_initial: dimensionless {init: 0, pub: out};
    var d_initial: dimensionless {init: 0, pub: out};
    var f_initial: dimensionless {init: 1, pub: out};
    var fCa_initial: dimensionless {init: 1, pub: out};
    var g_initial: dimensionless {init: 1, pub: out};
    var Nai_initial: mM {init: 11.6, pub: out};
    var Ki_initial: mM {init: 138.3, pub: out};
    var Cai_total_initial: mM {init: 0.0064, pub: out};
    var CaSR_total_initial: mM {init: 4.2, pub: out};
  enddef;

  def comp membrane_potential as
    var V: mV {init: -64.7550201989744, pub: out};
    var V_initial: mV {pub: in};
    var Cm: uF_per_mmsq {pub: in};
    var time: ms {pub: in};
    var Itotal: uA_per_mmsq {pub: in};
    ode(V, time) = -Itotal/Cm;
  enddef;

  def comp total_membrane_current as
    var Itotal: uA_per_mmsq {pub: out, priv: out};
    var ICa_additional: uA_per_mmsq {pub: in};
    var INa_additional: uA_per_mmsq {pub: in};
    var IK_additional: uA_per_mmsq {pub: in};
    var INa: uA_per_mmsq {pub: in};
    var IK1: uA_per_mmsq {pub: in};
    var Ito: uA_per_mmsq {pub: in};
    var IKr: uA_per_mmsq {pub: in};
    var IKs: uA_per_mmsq {pub: in};
    var ICaL: uA_per_mmsq {pub: in};
    var INaCa: uA_per_mmsq {pub: in};
    var INaK: uA_per_mmsq {pub: in};
    var IpCa: uA_per_mmsq {pub: in};
    var IpK: uA_per_mmsq {pub: in};
    var IbCa: uA_per_mmsq {pub: in};
    var IbNa: uA_per_mmsq {pub: in};
    var ISAstim: uA_per_mmsq {pub: in};
    Itotal = ISAstim+ICa_additional+INa_additional+IK_additional+INa+IK1+Ito+IKr+IKs+ICaL+INaCa+INaK+IbNa+IbCa+IpCa+IpK;
  enddef;

  def comp K_flux as
    var K_flux: mM_per_ms {pub: out, priv: out};
    var vC: dimensionless {pub: in};
    var Am: per_mm {pub: in};
    var F: faradays_constant {pub: in};
    var IK_additional: uA_per_mmsq {pub: in};
    var IK1: uA_per_mmsq {pub: in};
    var Ito: uA_per_mmsq {pub: in};
    var IKr: uA_per_mmsq {pub: in};
    var IKs: uA_per_mmsq {pub: in};
    var INaK: uA_per_mmsq {pub: in};
    var IpK: uA_per_mmsq {pub: in};
    K_flux = Am/(vC*F)*(IK_additional+IK1+Ito+IKr+IKs+IpK-INaK*2{dimensionless});
  enddef;

  def comp Na_flux as
    var Na_flux: mM_per_ms {pub: out, priv: out};
    var vC: dimensionless {pub: in};
    var Am: per_mm {pub: in};
    var F: faradays_constant {pub: in};
    var INa_additional: uA_per_mmsq {pub: in};
    var INa: uA_per_mmsq {pub: in};
    var IbNa: uA_per_mmsq {pub: in};
    var INaK: uA_per_mmsq {pub: in};
    var INaCa: uA_per_mmsq {pub: in};
    Na_flux = Am/(vC*F)*(INa+INa_additional+IbNa+INaK*3{dimensionless}+INaCa*3{dimensionless});
  enddef;

  def comp Ca_flux as
    var Ca_flux: mM_per_ms {pub: out, priv: out};
    var vC: dimensionless {pub: in};
    var Am: per_mm {pub: in};
    var F: faradays_constant {pub: in};
    var ICa_additional: uA_per_mmsq {pub: in};
    var ICaL: uA_per_mmsq {pub: in};
    var IbCa: uA_per_mmsq {pub: in};
    var IpCa: uA_per_mmsq {pub: in};
    var INaCa: uA_per_mmsq {pub: in};
    Ca_flux = Am/(2{dimensionless}*vC*F)*(2{dimensionless}*INaCa-(ICa_additional+ICaL+IbCa+IpCa));
  enddef;

  def comp Ca_SR_flux as
    var Ca_SR_flux: mM_per_ms {pub: out, priv: out};
    var Jleak: mM_per_ms {pub: in};
    var Jup: mM_per_ms {pub: in};
    var Jrel: mM_per_ms {pub: in};
    var JCaSR_additional: mM_per_ms {pub: in};
    Ca_SR_flux = Jleak+Jrel+JCaSR_additional-Jup;
  enddef;

  def comp INa as
    var INa: uA_per_mmsq {pub: out};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var E_Na: mV {pub: in};
    var g_Na: mS_per_mmsq {pub: in};
    var m: dimensionless {pub: in};
    var h: dimensionless {pub: in};
    var j: dimensionless {pub: in};
    INa = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp IK1 as
    var IK1: uA_per_mmsq {pub: out};
    var g_K1: mS_per_mmsq {pub: in};
    var V: mV {pub: in, priv: out};
    var Ko: mM {pub: in};
    var E_K: mV {pub: in};
    var K1_infinity: dimensionless {pub: in};
    IK1 = g_K1*sqrt(Ko/5.4{mM})*K1_infinity*(V-E_K);
  enddef;

  def comp Ito as
    var Ito: uA_per_mmsq {pub: out};
    var g_to: mS_per_mmsq {pub: in};
    var E_K: mV {pub: in};
    var V: mV {pub: in, priv: out};
    var time: ms {pub: in, priv: out};
    var s: dimensionless {pub: in};
    var r: dimensionless {pub: in};
    Ito = g_to*r*s*(V-E_K);
  enddef;

  def comp IKr as
    var IKr: uA_per_mmsq {pub: out};
    var g_Kr: mS_per_mmsq {pub: in};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var E_K: mV {pub: in};
    var Ko: mM {pub: in};
    var Xr1: dimensionless {pub: in};
    var Xr2: dimensionless {pub: in};
    IKr = g_Kr*sqrt(Ko/5.4{mM})*Xr1*Xr2*(V-E_K);
  enddef;

  def comp IKs as
    var IKs: uA_per_mmsq {pub: out};
    var g_Ks: mS_per_mmsq {pub: in};
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_Ks: mV {pub: in};
    var Xs: dimensionless {pub: in};
    IKs = g_Ks*sqr(Xs)*(V-E_Ks);
  enddef;

  def comp INaK as
    var INaK: uA_per_mmsq {pub: out};
    var P_NaK: uA_per_mmsq {pub: in};
    var K_mNa: mM {pub: in};
    var K_mK: mM {pub: in};
    var V: mV {pub: in};
    var R: gas_constant {pub: in};
    var T: K {pub: in};
    var F: faradays_constant {pub: in};
    var Nai: mM {pub: in};
    var Ko: mM {pub: in};
    INaK = P_NaK*Ko*Nai/((Ko+K_mK)*(Nai+K_mNa)*(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0353{dimensionless}*exp(-V*F/(R*T))));
  enddef;

  def comp IpK as
    var IpK: uA_per_mmsq {pub: out};
    var g_pK: mS_per_mmsq {pub: in};
    var V: mV {pub: in};
    var E_K: mV {pub: in};
    IpK = g_pK*(V-E_K)/(1{dimensionless}+exp((25{mV}-V)/5.98{mV}));
  enddef;

  def comp IbNa as
    var IbNa: uA_per_mmsq {pub: out};
    var g_bNa: mS_per_mmsq {pub: in};
    var V: mV {pub: in};
    var E_Na: mV {pub: in};
    IbNa = g_bNa*(V-E_Na);
  enddef;

  def comp ICaL as
    var ICaL: uA_per_mmsq {pub: out};
    var g_CaL: mm_per_ms {pub: in};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var Cai: mM {pub: in, priv: out};
    var Cao: mM {pub: in};
    var R: gas_constant {pub: in};
    var T: K {pub: in};
    var F: faradays_constant {pub: in};
    var d: dimensionless {pub: in};
    var f: dimensionless {pub: in};
    var fCa: dimensionless {pub: in};
    ICaL = g_CaL*d*f*fCa*4{dimensionless}*V*sqr(F)/(R*T)*(Cai*exp(2{dimensionless}*V*F/(R*T))-0.341{dimensionless}*Cao)/(exp(2{dimensionless}*V*F/(R*T))-1{dimensionless});
  enddef;

  def comp IpCa as
    var IpCa: uA_per_mmsq {pub: out};
    var g_pCa: uA_per_mmsq {pub: in};
    var K_pCa: mM {pub: in};
    var Cai: mM {pub: in};
    IpCa = g_pCa*Cai/(K_pCa+Cai);
  enddef;

  def comp INaCa as
    var INaCa: uA_per_mmsq {pub: out};
    var k_NaCa: uA_per_mmsq {pub: in};
    var K_mNai: mM {pub: in};
    var K_mCa: mM {pub: in};
    var k_sat: dimensionless {pub: in};
    var gamma: dimensionless {pub: in};
    var alpha: dimensionless {pub: in};
    var V: mV {pub: in};
    var R: gas_constant {pub: in};
    var T: K {pub: in};
    var F: faradays_constant {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    INaCa = k_NaCa*(exp(gamma*V*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-exp((gamma-1{dimensionless})*V*F/(R*T))*pow(Nao, 3{dimensionless})*Cai*alpha)/((pow(K_mNai, 3{dimensionless})+pow(Nao, 3{dimensionless}))*(K_mCa+Cao)*(1{dimensionless}+k_sat*exp((gamma-1{dimensionless})*V*F/(R*T))));
  enddef;

  def comp IbCa as
    var IbCa: uA_per_mmsq {pub: out};
    var g_bCa: mS_per_mmsq {pub: in};
    var V: mV {pub: in};
    var E_Ca: mV {pub: in};
    IbCa = g_bCa*(V-E_Ca);
  enddef;

  def comp ENa as
    var z: dimensionless {init: 1};
    var T: K {pub: in};
    var intracellular_concentration: mM {pub: in};
    var extracellular_concentration: mM {pub: in};
    var R: gas_constant {init: 8314.472, pub: out};
    var F: faradays_constant {init: 96485, pub: out};
    var reversal_potential: mV {pub: out};
    reversal_potential = R*T/(z*F)*ln(extracellular_concentration/intracellular_concentration);
  enddef;

  def comp EK as
    var z: dimensionless {init: 1};
    var T: K {pub: in};
    var intracellular_concentration: mM {pub: in};
    var extracellular_concentration: mM {pub: in};
    var R: gas_constant {init: 8314.472, pub: out};
    var F: faradays_constant {init: 96485, pub: out};
    var reversal_potential: mV {pub: out};
    reversal_potential = R*T/(z*F)*ln(extracellular_concentration/intracellular_concentration);
  enddef;

  def comp ECa as
    var z: dimensionless {init: 2};
    var T: K {pub: in};
    var intracellular_concentration: mM {pub: in};
    var extracellular_concentration: mM {pub: in};
    var R: gas_constant {init: 8314.472, pub: out};
    var F: faradays_constant {init: 96485, pub: out};
    var reversal_potential: mV {pub: out};
    reversal_potential = R*T/(z*F)*ln(extracellular_concentration/intracellular_concentration);
  enddef;

  def comp EKs as
    var z: dimensionless {init: 1};
    var T: K {pub: in};
    var intracellular_concentration_1: mM {pub: in};
    var extracellular_concentration_1: mM {pub: in};
    var intracellular_concentration_2: mM {pub: in};
    var extracellular_concentration_2: mM {pub: in};
    var multiplier_1: dimensionless {init: 1};
    var multiplier_2: dimensionless {pub: in};
    var R: gas_constant {init: 8314.472, pub: out};
    var F: faradays_constant {init: 96485, pub: out};
    var reversal_potential: mV {pub: out};
    reversal_potential = R*T/(z*F)*ln((multiplier_1*extracellular_concentration_1+multiplier_2*extracellular_concentration_2)/(multiplier_1*intracellular_concentration_1+multiplier_2*intracellular_concentration_2));
  enddef;

  def comp Nai as
    var Nai: mM {init: 7.39223229243676, pub: out};
    var time: ms {pub: in};
    var Na_flux: mM_per_ms {pub: in};
    ode(Nai, time) = -Na_flux;
  enddef;

  def comp Ki as
    var Ki: mM {init: 62.3622982068174, pub: out};
    var time: ms {pub: in};
    var K_flux: mM_per_ms {pub: in};
    ode(Ki, time) = -K_flux;
  enddef;

  def comp Cai as
    var Cai: mM {pub: out};
    var CaSR: mM {pub: out};
    var Cai_total: mM {init: 0.00640319307218471, pub: out};
    var CaSR_total: mM {init: -5.43271749502848, pub: out};
    var Cai_buf: mM {pub: out};
    var CaSR_buf: mM {pub: out};
    var Bufc: mM {pub: in};
    var Kbufc: mM {pub: in};
    var Bufsr: mM {pub: in};
    var Kbufsr: mM {pub: in};
    var vSR: dimensionless {pub: in};
    var vC: dimensionless {pub: in};
    var Am: per_mm {pub: in};
    var F: faradays_constant {pub: in};
    var time: ms {pub: in};
    var Capacitance: uF_per_mmsq {pub: in};
    var Ca_flux: mM_per_ms {pub: in};
    var Ca_SR_flux: mM_per_ms {pub: in};
    var aCai: dimensionless;
    var bCai: mM;
    var cCai: mMsq;
    var aCaSR: dimensionless;
    var bCaSR: mM;
    var cCaSR: mMsq;
    aCai = -1{dimensionless};
    bCai = Cai_total+Kbufc+Bufc;
    cCai = -Bufc*Cai_total;
    Cai_buf = (sqrt(sqr(bCai)-4{dimensionless}*aCai*cCai)-bCai)/(2{dimensionless}*aCai);
    Cai = Cai_total-Cai_buf;
    ode(Cai_total, time) = Ca_flux+Ca_SR_flux;
    aCaSR = -1{dimensionless};
    bCaSR = CaSR_total+Kbufsr+Bufsr;
    cCaSR = -Bufsr*CaSR_total;
    CaSR_buf = (sqrt(sqr(bCaSR)-4{dimensionless}*aCaSR*cCaSR)-bCaSR)/(2{dimensionless}*aCaSR);
    CaSR = CaSR_total-CaSR_buf;
    ode(CaSR_total, time) = vC/vSR*(-Ca_SR_flux);
  enddef;

  def comp Jleak as
    var Jleak: mM_per_ms {pub: out};
    var V_leak: per_ms {pub: in};
    var Cai: mM {pub: in};
    var CaSR: mM {pub: in};
    Jleak = V_leak*(CaSR-Cai);
  enddef;

  def comp Jup as
    var Jup: mM_per_ms {pub: out};
    var Vmax_up: mM_per_ms {pub: in};
    var Cai: mM {pub: in};
    var K_up: mM {pub: in};
    Jup = Vmax_up/(1{dimensionless}+sqr(K_up)/sqr(Cai));
  enddef;

  def comp Jrel as
    var Jrel: mM_per_ms {pub: out};
    var Cai: mM {pub: in};
    var CaSR: mM {pub: in};
    var a_rel: mM_per_ms {pub: in};
    var b_rel: mM {pub: in};
    var c_rel: mM_per_ms {pub: in};
    var tau_g: ms {pub: in};
    var V: mV {pub: in};
    var time: ms {pub: in};
    var d: dimensionless {pub: in};
    var g: dimensionless {pub: in};
    Jrel = (a_rel*sqr(CaSR)/(sqr(b_rel)+sqr(CaSR))+c_rel)*d*g;
  enddef;

  def comp m_gate as
    var m: dimensionless {init: 0.0866469000318477, pub: out};
    var tau_m: ms {pub: out};
    var m_infinity: dimensionless {pub: out};
    var alpha_m: per_ms;
    var beta_m: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    m_infinity = 1{dimensionless}/sqr(1{dimensionless}+exp((-56.86{mV}-V)/9.03{mV}));
    alpha_m = 1{per_ms}/(1{dimensionless}+exp((-60{mV}-V)/5{mV}));
    beta_m = 0.1{per_ms}/(1{dimensionless}+exp((35{mV}+V)/5{mV}))+0.1{per_ms}/(1{dimensionless}+exp((V-50{mV})/200{mV}));
    tau_m = 1{mscu}*alpha_m*beta_m;
    ode(m, time) = (m_infinity-m)/tau_m;
  enddef;

  def comp h_gate as
    var h: dimensionless {init: 0.0814742345064571, pub: out};
    var tau_h: ms {pub: out};
    var h_infinity: dimensionless {pub: out};
    var alpha_h: per_ms;
    var beta_h: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    h_infinity = 1{dimensionless}/sqr(1{dimensionless}+exp((71.55{mV}+V)/7.43{mV}));
    alpha_h = sel
      case V < -40{mV}:
        0.057{per_ms}*exp(-(80{mV}+V)/6.8{mV});
      otherwise:
        0{per_ms};
    endsel;
    beta_h = sel
      case V < -40{mV}:
        2.7{per_ms}*exp(0.079{per_mV}*V)+3.1e5{per_ms}*exp(0.3485{per_mV}*V);
      otherwise:
        0.77{dimensionless}/(0.13{ms}*(1{dimensionless}+exp(-(V+10.66{mV})/11.1{mV})));
    endsel;
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_infinity-h)/tau_h;
  enddef;

  def comp j_gate as
    var j: dimensionless {init: 0.0445382453674896, pub: out};
    var tau_j: ms {pub: out};
    var j_infinity: dimensionless {pub: out};
    var alpha_j: per_ms;
    var beta_j: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    j_infinity = 1{dimensionless}/sqr(1{dimensionless}+exp((71.55{mV}+V)/7.43{mV}));
    alpha_j = sel
      case V < -40{mV}:
        (-2.5428e4{per_mV_per_ms}*exp(0.2444{per_mV}*V)-6.948e-6{per_mV_per_ms}*exp(-0.04391{per_mV}*V))*(V+37.78{mV})/(1{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV})));
      otherwise:
        0{per_ms};
    endsel;
    beta_j = sel
      case V < -40{mV}:
        0.02424{per_ms}*exp(-0.01052{per_mV}*V)/(1{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV})));
      otherwise:
        0.6{per_ms}*exp(0.057{per_mV}*V)/(1{dimensionless}+exp(-0.1{per_mV}*(V+32{mV})));
    endsel;
    tau_j = 1{dimensionless}/(alpha_j+beta_j);
    ode(j, time) = (j_infinity-j)/tau_j;
  enddef;

  def comp K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: dimensionless;
    var beta_K1: dimensionless;
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
    alpha_K1 = 0.1{dimensionless}/(1{dimensionless}+exp(0.06{per_mV}*(V-(E_K+200{mV}))));
    beta_K1 = (3{dimensionless}*exp(0.0002{per_mV}*(V-E_K+100{mV}))+exp(0.1{per_mV}*(V-(E_K+10{mV}))))/(1{dimensionless}+exp(-0.5{per_mV}*(V-E_K)));
  enddef;

  def comp r_gate as
    var r: dimensionless {init: 7.33403191056144e-7, pub: out};
    var r_infinity: dimensionless;
    var tau_r: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(r, time) = (r_infinity-r)/tau_r;
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp((20{mV}-V)/6{mV}));
    tau_r = 9.5{ms}*exp(-sqr(V+40{mV})/1800{mVsq})+0.8{ms};
  enddef;

  def comp s_gate as
    var s: dimensionless {init: 0.99980780778701, pub: out};
    var s_infinity: dimensionless;
    var tau_s: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(s, time) = (s_infinity-s)/tau_s;
    s_infinity = 1{dimensionless}/(1{dimensionless}+exp((20{mV}+V)/5{mV}));
    tau_s = 85{ms}*exp(-sqr(V+45{mV})/320{mVsq})+5{ms}/(1{dimensionless}+exp((V-20{mV})/5{mV}))+3{ms};
  enddef;

  def comp Xr1_gate as
    var Xr1: dimensionless {init: 0.364725483215666, pub: out};
    var alpha_Xr1: per_ms;
    var beta_Xr1: per_ms;
    var Xr1_infinity: dimensionless;
    var tau_Xr1: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(Xr1, time) = (Xr1_infinity-Xr1)/tau_Xr1;
    Xr1_infinity = 1{dimensionless}/(1{dimensionless}+exp((-26{mV}-V)/7{mV}));
    alpha_Xr1 = 450{per_ms}/(1{dimensionless}+exp((-45{mV}-V)/10{mV}));
    beta_Xr1 = 6{per_ms}/(1{dimensionless}+exp((V+30{mV})/11.5{mV}));
    tau_Xr1 = 1{mscu}*alpha_Xr1*beta_Xr1;
  enddef;

  def comp Xr2_gate as
    var Xr2: dimensionless {init: 0.275169025815548, pub: out};
    var alpha_Xr2: per_ms;
    var beta_Xr2: per_ms;
    var Xr2_infinity: dimensionless;
    var tau_Xr2: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(Xr2, time) = (Xr2_infinity-Xr2)/tau_Xr2;
    Xr2_infinity = 1{dimensionless}/(1{dimensionless}+exp((88{mV}+V)/24{mV}));
    alpha_Xr2 = 3{per_ms}/(1{dimensionless}+exp((-60{mV}-V)/20{mV}));
    beta_Xr2 = 1.12{per_ms}/(1{dimensionless}+exp((V-60{mV})/20{mV}));
    tau_Xr2 = 1{mscu}*alpha_Xr2*beta_Xr2;
  enddef;

  def comp Xs_gate as
    var Xs: dimensionless {init: 0.0138157627500838, pub: out};
    var alpha_Xs: per_ms;
    var beta_Xs: per_ms;
    var Xs_infinity: dimensionless;
    var tau_Xs: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(Xs, time) = (Xs_infinity-Xs)/tau_Xs;
    Xs_infinity = 1{dimensionless}/(1{dimensionless}+exp((-5{mV}-V)/14{mV}));
    alpha_Xs = 1100{per_ms}/sqrt(1{dimensionless}+exp((-10{mV}-V)/6{mV}));
    beta_Xs = 1{per_ms}/(1{dimensionless}+exp((V-60{mV})/20{mV}));
    tau_Xs = 1{mscu}*alpha_Xs*beta_Xs;
  enddef;

  def comp d_gate as
    var d: dimensionless {init: 0.000346485795707982, pub: out};
    var alpha_d: per_ms {pub: out};
    var beta_d: per_ms {pub: out};
    var tau_d: ms {pub: out};
    var gamma_d: ms {pub: out};
    var d_infinity: dimensionless {pub: out};
    var V: mV {pub: in};
    var time: ms {pub: in};
    d_infinity = 1{dimensionless}/(1{dimensionless}+exp((-5{mV}-V)/7.5{mV}));
    alpha_d = 1.4{per_ms}/(1{dimensionless}+exp((-35{mV}-V)/13{mV}))+0.25{per_ms};
    beta_d = 1.4{per_ms}/(1{dimensionless}+exp((5{mV}+V)/5{mV}));
    gamma_d = 1{ms}/(1{dimensionless}+exp((50{mV}-V)/20{mV}));
    tau_d = 1{mscu}*alpha_d*beta_d+gamma_d;
    ode(d, time) = (d_infinity-d)/tau_d;
  enddef;

  def comp f_gate as
    var f: dimensionless {init: 0.9951755361259, pub: out};
    var tau_f: ms {pub: out};
    var f_infinity: dimensionless {pub: out};
    var V: mV {pub: in};
    var time: ms {pub: in};
    f_infinity = 1{dimensionless}/(1{dimensionless}+exp((20{mV}+V)/7{mV}));
    tau_f = 1125{ms}*exp(-sqr(V+27{mV})/240{mVsq})+165{ms}/(1{dimensionless}+exp((25{mV}-V)/10{mV}))+80{ms};
    ode(f, time) = (f_infinity-f)/tau_f;
  enddef;

  def comp fCa_gate as
    var fCa: dimensionless {init: 1.0069809740354, pub: out};
    var alpha_fCa: dimensionless;
    var beta_fCa: dimensionless;
    var tau_fCa: ms {init: 2, pub: out};
    var gamma_fCa: dimensionless;
    var fCa_infinity: dimensionless {pub: out};
    var V: mV {pub: in};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    fCa_infinity = (alpha_fCa+beta_fCa+gamma_fCa+0.23{dimensionless})/1.46{dimensionless};
    alpha_fCa = 1{dimensionless}/(1{dimensionless}+pow(Cai/0.000325{mM}, 8{dimensionless}));
    beta_fCa = 0.1{dimensionless}/(1{dimensionless}+exp((Cai-0.0005{mM})/0.0001{mM}));
    gamma_fCa = 0.2{dimensionless}/(1{dimensionless}+exp((Cai-0.00075{mM})/0.0008{mM}));
    ode(fCa, time) = sel
      case (fCa_infinity > fCa) and (V > -60{mV}):
        0{per_ms};
      otherwise:
        (fCa_infinity-fCa)/tau_fCa;
    endsel;
  enddef;

  def comp g_gate as
    var g: dimensionless {init: 0.99999345944766, pub: out};
    var g_infinity: dimensionless {pub: out};
    var tau_g: ms {pub: in};
    var Cai: mM {pub: in};
    var V: mV {pub: in};
    var time: ms {pub: in};
    g_infinity = sel
      case Cai <= 0.00035{mM}:
        1{dimensionless}/(1{dimensionless}+pow(Cai, 6{dimensionless})/pow(0.00035{mM}, 6{dimensionless}));
      otherwise:
        1{dimensionless}/(1{dimensionless}+pow(Cai, 16{dimensionless})/pow(0.00035{mM}, 16{dimensionless}));
    endsel;
    ode(g, time) = sel
      case (g_infinity > g) and (V > -60{mV}):
        0{per_ms};
      otherwise:
        (g_infinity-g)/tau_g;
    endsel;
  enddef;

  def comp NL_model as
    var xHalfSL: dimensionless;
    var Cai_in: millimolar {pub: in};
    var ForceExt: mN_per_mm2 {pub: out};
    var time: ms {pub: in};
    var cTnCaEff: millimolar;
    var cTnCa: millimolar {init: 0.059790672481515};
    var cTnCaCB: millimolar {init: 0.00990501329914472};
    var cTnCB: millimolar {init: 0.00156766416391726};
    var Q_a: per_millisecond;
    var Q_b: per_millisecond;
    var Q_r: per_millisecond;
    var Q_d: per_millisecond;
    var Q_d1: per_millisecond;
    var Q_d2: per_millisecond;
    var Y_1: per_millimolar_millisecond {init: 39};
    var Y_2: per_millisecond {init: 0.0039};
    var Y_3: per_millisecond {init: 0.03};
    var Y_4: per_millisecond {init: 0.12};
    var Y_d: ms {init: 0.027};
    var Z_1: per_millisecond {init: 0.03};
    var Z_2: per_millisecond {init: 0.0039};
    var Z_3: per_millimolar_millisecond {init: 1560};
    var OptiHSL: dimensionless {init: 1.17};
    var xLLimitCB: dimensionless {init: 0.005};
    var R: dimensionless {init: 2};
    var SlidingR: per_ms {init: 1.2};
    var xInext: dimensionless {init: 0.741096216822752};
    var cTn: millimolar;
    var trpnbar: millimolar {init: 0.06};
    var cCaTropC: millimolar;
    var xhhh: dimensionless;
    var cTRPN: millimolar {pub: out};
    var AForceCB: mN_per_mm2 {init: 1800000};
    var xNewCBF: mN_per_mm2;
    var xKcoeff: mN_per_mm2 {init: 140000};
    var xKcoeff2: mN_per_mm2 {init: 30};
    var ForceP: mN_per_mm2;
    var ForceB: mN_per_mm2;
    var V_LV: mL {pub: in};
    var radiusLV: micrometre;
    var Fmult: dimensionless {init: 1.2};
    var Tension: mN_per_mm2;
    var P_LV: mmHg {pub: out};
    var offset: mmHg {init: 0};
    var xDen: micrometre {init: 236550};
    var Cai: millimolar;
    Cai = Cai_in;
    radiusLV = pow(3{dimensionless}*V_LV/2{dimensionless}/pi, 1{dimensionless}/3{dimensionless});
    xHalfSL = 10000{dimensionless}*2{dimensionless}*pi*radiusLV/xDen;
    Tension = ForceExt*Fmult;
    P_LV = 2{micrometre}*Tension/radiusLV*1000{dimensionless}/133{dimensionless}-offset;
    ode(xInext, time) = SlidingR*(xHalfSL-xInext-xLLimitCB);
    cTn = 1{millimolar}-cTnCa-cTnCaCB-cTnCB;
    Q_b = Y_1*Cai*cTn/1{millimolar}-Z_1*cTnCa/1{millimolar};
    cTnCaEff = cTnCa/exp(R*sqr(xHalfSL-OptiHSL));
    Q_a = Y_2*cTnCaEff/1{millimolar}-Z_2*cTnCaCB/1{millimolar};
    Q_r = Y_3*cTnCaCB/1{millimolar}-Z_3*cTnCB*Cai/1{millimolar};
    Q_d1 = Y_d*sqr(SlidingR*(xHalfSL-xInext-xLLimitCB))*cTnCaCB/1{millimolar};
    Q_d = Y_4*cTnCB/1{millimolar};
    Q_d2 = Y_d*sqr(SlidingR*(xHalfSL-xInext-xLLimitCB))*cTnCB/1{millimolar};
    cCaTropC = trpnbar*(Q_r+Q_d2-Q_b)/1{per_millisecond};
    ode(cTnCa, time) = Q_b*1{millimolar}-Q_a*1{millimolar};
    ode(cTnCaCB, time) = Q_a*1{millimolar}-Q_r*1{millimolar}-Q_d1*1{millimolar};
    ode(cTnCB, time) = Q_r*1{millimolar}-Q_d*1{millimolar}-Q_d2*1{millimolar};
    xhhh = xHalfSL-xInext;
    cTRPN = (cTnCaCB+cTnCB)*trpnbar/1{millimolar};
    xNewCBF = AForceCB*(cTnCaCB+cTnCB)*trpnbar/1{millimolar2};
    ForceP = sel
      case xHalfSL > 0.97{dimensionless}:
        xKcoeff*pow(xHalfSL-0.97{dimensionless}, 5{dimensionless});
      otherwise:
        xKcoeff2*(xHalfSL-0.97{dimensionless});
    endsel;
    ForceB = xNewCBF*xhhh;
    ForceExt = ForceP+ForceB;
  enddef;

  def comp lung as
    var time: ms {pub: in};
    var F_PC: L_per_sec {pub: in};
    var V_PC: mL {pub: in};
    var F_MU: L_per_sec {pub: in};
    var V_MU: mL {pub: in};
    var Fpc: liter_per_min;
    var Fsc: liter_per_min;
    var Vpc: mL;
    var Vsc: mL;
    var Tbody: kelvin {init: 300};
    var Pstp: mmHg {init: 760};
    var Tstp: kelvin {init: 273};
    var PO2_pc: mmHg {init: 58.5987098171338};
    var PO2_sc: mmHg {init: 3.98485499218493};
    var nH: dimensionless {init: 3.5};
    var P50_O2: mmHg {init: 26.5};
    var SHbO2_pc: dimensionless;
    var SHbO2_sc: dimensionless;
    var dSHbO2dPO2_pc: per_mmHg;
    var dSHbO2dPO2_sc: per_mmHg;
    var CHb: mole {init: 0.0204};
    var H: dimensionless {init: 0.45};
    var alphaO2: mole_per_mmHg {init: 1.36e-6};
    var CtO2_pc: mole;
    var CtO2_sc: mole;
    var PA_O2: mmHg {init: 84.5907622728202};
    var DL_O2: mlSTPD_per_s_per_mmHg;
    var Vpcmax: liter {init: 0.07125};
    var PO2_isf: mmHg {init: 0.000255720054332517};
    var Visf: mL {init: 48000};
    var PS: mL_per_min {init: 600000};
    var Vcytox: mole_per_min {init: 0.0126};
    var Kcytox: mole {init: 1e-9};
    var V_O2: mole_per_min;
    var O2flux: mL_per_min;
    var PCO2_pc: mmHg {init: 27.0873474614805};
    var PCO2_sc: mmHg {init: 74.7200600017978};
    var P50_CO2: mmHg {init: 250};
    var SHbCO2_pc: dimensionless;
    var SHbCO2_sc: dimensionless;
    var dSHbCO2dPCO2_pc: per_mmHg;
    var alphaCO2: mole_per_mmHg {init: 3.264e-5};
    var CtCO2_pc: mole;
    var dSHbCO2dPCO2_sc: per_mmHg;
    var CtCO2_sc: mole;
    var PA_CO2: mmHg {init: 26.9281383029831};
    var DL_CO2: mlSTPD_per_s_per_mmHg;
    var PCO2_isf: mmHg {init: 74.7805551351833};
    var RQ: dimensionless {init: 0.8};
    var V_CO2: mole_per_min;
    var CO2flux: mL_per_min;
    var QdotCA: mL_per_s;
    var QdotDC: mL_per_s;
    var QdotED: mL_per_s;
    var Pao: mmHg {init: 760};
    var PH2O: mmHg {init: 47};
    var Pao_O2: mmHg;
    var Pao_CO2: mmHg;
    var Pao_N2: mmHg;
    var PD_O2: mmHg {init: 137.481485816086};
    var PC_O2: mmHg {init: 129.526915731438};
    var PD_N2: mmHg;
    var PC_N2: mmHg;
    var PA_N2: mmHg;
    var Rs: cmH2O_sec_per_L;
    var Rc: cmH2O_sec_per_L;
    var Ru: cmH2O_sec_per_L;
    var Vc: L {init: 0.0807533336512639};
    var dV: L {init: 3.38422831502523};
    var Vcw: L;
    var VA: L {init: 3.24550268572493};
    var Vve: L {init: -0.07949414};
    var Pcw: cmH2O;
    var Pl: cmH2O;
    var PA: cmH2O;
    var Pc: cmH2O;
    var Pve: cmH2O;
    var Ppl: cmH2O;
    var PplmmHg: mmHg;
    var PD: cmH2O;
    var Pmus: cmH2O;
    var RV: L {init: 1.9};
    var TLC: L {init: 7.3};
    var VD: L {init: 0.185};
    var f: per_min {init: 15};
    var Ac: cmH2O {init: 7.09};
    var Acw: cmH2O {init: 1.4};
    var Al: cmH2O {init: 0.2};
    var As: cmH2O_sec_per_L {init: 2.2};
    var Au: cmH2O_sec_per_L {init: 0.34};
    var Bc: cmH2O {init: 37.3};
    var Bcp: cmH2O {init: 3.73};
    var Bcw: cmH2O {init: -3.5};
    var Bl: cmH2O {init: -0.5};
    var Bs: cmH2O {init: 0.02};
    var Cve: L_per_cmH2O {init: 0.5};
    var Kc: cmH2O_sec_per_L {init: 0.21};
    var Kl: per_L {init: 1};
    var Ks: dimensionless {init: -10.9};
    var Ku: cmH2O_sec2_per_L2 {init: 0.46};
    var Vstar: L {init: 5.3};
    var Vcmax: L {init: 0.185};
    var tau: second {init: 0.1};
    var Amus: cmH2O {init: 2};
    var PD_CO2: mmHg {init: 5.25565008853068};
    var PC_CO2: mmHg {init: 8.52962553969249};
    var dVdt: dimensionless;
    var dVcdt: dimensionless;
    var dVAdt: dimensionless;
    Fpc = F_PC*0.06{dimensionless};
    Fsc = F_MU*0.06{dimensionless};
    Vpc = V_PC;
    Vsc = V_MU;
    DL_CO2 = sqrt(Vpc/Vpcmax)*16.67{dimensionless}*0.0316227766016838{dimensionless};
    Pao_O2 = (Pao-PH2O)*0.21{dimensionless};
    Pao_CO2 = (Pao-PH2O)*3e-4{dimensionless};
    SHbO2_pc = pow(PO2_pc/P50_O2, nH)/(pow(PO2_pc/P50_O2, nH)+1{dimensionless});
    SHbO2_sc = pow(PO2_sc/P50_O2, nH)/(pow(PO2_sc/P50_O2, nH)+1{dimensionless});
    dSHbO2dPO2_pc = nH*pow(PO2_pc, -1{dimensionless})*pow(PO2_pc/P50_O2, nH)/sqr(pow(PO2_pc/P50_O2, nH)+1{dimensionless});
    dSHbO2dPO2_sc = nH*pow(PO2_sc, -1{dimensionless})*pow(PO2_sc/P50_O2, nH)/sqr(pow(PO2_sc/P50_O2, nH)+1{dimensionless});
    CtO2_pc = alphaO2*PO2_pc+CHb*SHbO2_pc*H;
    CtO2_sc = alphaO2*PO2_sc+CHb*SHbO2_sc*H;
    DL_O2 = (sqrt(Vpc/Vpcmax)*(0.397{dimensionless}+0.0085{dimensionless}*PO2_pc-1.3e-4{dimensionless}*sqr(PO2_pc))+5.1e-7{dimensionless}*pow(PO2_pc, 3{dimensionless})*31.622776601683782{dimensionless})*0.0316227766016838{dimensionless};
    V_O2 = Vcytox*alphaO2*PO2_isf/(Kcytox+alphaO2*PO2_isf);
    O2flux = DL_O2*(PA_O2-PO2_pc)*22400{dimensionless}*0.002678571428571428{dimensionless};
    SHbCO2_pc = PCO2_pc/P50_CO2/(PO2_pc/P50_CO2+1{dimensionless});
    SHbCO2_sc = PCO2_sc/P50_CO2/(PCO2_sc/P50_CO2+1{dimensionless});
    dSHbCO2dPCO2_pc = pow(PCO2_pc, -1{dimensionless})*PCO2_pc/P50_CO2/sqr(PCO2_pc/P50_CO2+1{dimensionless});
    dSHbCO2dPCO2_sc = pow(PCO2_sc, -1{dimensionless})*PCO2_sc/P50_CO2/sqr(PCO2_sc/P50_CO2+1{dimensionless});
    CtCO2_pc = alphaCO2*PCO2_pc+CHb*SHbCO2_pc*H;
    CtCO2_sc = alphaCO2*PCO2_sc+CHb*SHbCO2_sc*H;
    V_CO2 = RQ*V_O2;
    CO2flux = DL_CO2*(PA_CO2-PCO2_pc)*22400{dimensionless}*0.002678571428571428{dimensionless};
    Rc = Kc*sqr(Vcmax/Vc);
    Rs = As*exp(Ks*(VA-RV)/(Vstar-RV))+Bs;
    Pl = Al*exp(Kl*VA)+Bl;
    Pmus = Amus*sin(6.283185307179586{dimensionless}*f*time*1.6666666666666667e-5{dimensionless})+Amus;
    Pc = sel
      case Vc/Vcmax < 0.5{dimensionless}:
        Ac-Bc*sqr(Vc/Vcmax-0.7{dimensionless});
      otherwise:
        5.6{dimensionless}-Bcp*log(Vcmax/Vc-0.999{dimensionless});
    endsel;
    Pve = Vve/Cve;
    Vcw = VA+VD;
    Pcw = Acw*(-1{dimensionless})+Bcw*log((TLC-RV)/(Vcw-RV)-0.999{dimensionless});
    Ppl = Pcw-Pmus;
    PA = Ppl+Pl+Pve;
    QdotCA = (Pc+Ppl-PA)/Rs*1000.0000000000001{dimensionless};
    ode(dV, time) = (Vcw-dV)/tau*0.001{dimensionless};
    dVdt = (Vcw-dV)/tau*0.001{dimensionless};
    Ru = Au+Ku*abs(dVdt)*1000.0000000000006{dimensionless};
    ode(Vc, time) = ((Pmus-Pc-Pcw)/(Ru+Rs)-(Pc-Pl-Pve)/Rs)*0.001{dimensionless};
    dVcdt = ((Pmus-Pc-Pcw)/(Ru+Rs)-(Pc-Pl-Pve)/Rs)*0.001{dimensionless};
    ode(VA, time) = ((Pc-Pl-Pve)/Rs-Pstp*Tbody/((PA+1030.94{dimensionless})*Tstp)*(O2flux+CO2flux)*2.2608333333333332e-5{dimensionless})*0.001{dimensionless};
    dVAdt = ((Pc-Pl-Pve)/Rs-Pstp*Tbody/((PA+1030.94{dimensionless})*Tstp)*(O2flux+CO2flux)*2.2608333333333332e-5{dimensionless})*0.001{dimensionless};
    PD = Pc+Ppl+Rc*(dVcdt+(Pc+Ppl-PA)/Rs*0.001{dimensionless})*1e3{dimensionless};
    QdotDC = (PD-(Pc+Ppl))/Rc*1000.0000000000001{dimensionless};
    QdotED = QdotDC;
    Pao_N2 = Pao-PH2O-Pao_O2-Pao_CO2;
    PplmmHg = Ppl*0.7371913011426465{dimensionless};
    PC_N2 = (Pc+Ppl+Pao*1.3565{dimensionless}-PC_O2*1.3565{dimensionless}-PC_CO2*1.3565{dimensionless})*0.7371913011426465{dimensionless};
    PA_N2 = (PA+Pao*1.3565{dimensionless}-PA_O2*1.3565{dimensionless}-PA_CO2*1.3565{dimensionless})*0.7371913011426465{dimensionless};
    PD_N2 = (PD+Pao*1.3565{dimensionless}-PD_O2*1.3565{dimensionless}-PD_CO2*1.3565{dimensionless})*0.7371913011426465{dimensionless};
    ode(PO2_pc, time) = (Fpc*(CtO2_sc-CtO2_pc)+DL_O2*(PA_O2-PO2_pc)*0.0026785714285714286{dimensionless})/(Vpc*(alphaO2+H*CHb*dSHbO2dPO2_pc))*0.01666666666666667{dimensionless};
    ode(PO2_sc, time) = (Fsc*(CtO2_pc-CtO2_sc)+PS*alphaO2*(PO2_isf-PO2_sc)*9.999999999999998e-4{dimensionless})/(Vsc*(alphaO2+H*CHb*dSHbO2dPO2_sc))*0.01666666666666667{dimensionless};
    ode(PO2_isf, time) = (PS*(PO2_sc-PO2_isf)/Visf-V_O2/(alphaO2*Visf)*1e3{dimensionless})*1.666666666666667e-5{dimensionless};
    ode(PCO2_pc, time) = (Fpc*(CtCO2_sc-CtCO2_pc)+DL_CO2*(PA_CO2-PCO2_pc)*0.0026785714285714286{dimensionless})/(Vpc*(alphaCO2+H*CHb*dSHbCO2dPCO2_pc))*0.01666666666666667{dimensionless};
    ode(PCO2_sc, time) = (Fsc*(CtCO2_pc-CtCO2_sc)+PS*alphaCO2*(PCO2_isf-PCO2_sc)*9.999999999999998e-4{dimensionless})/(Vsc*(alphaCO2+H*CHb*dSHbCO2dPCO2_sc))*0.01666666666666667{dimensionless};
    ode(PCO2_isf, time) = (PS*(PCO2_sc-PCO2_isf)/Visf+V_CO2/(alphaCO2*Visf)*1e3{dimensionless})*1.666666666666667e-5{dimensionless};
    ode(PD_O2, time) = sel
      case dVAdt > 0{dimensionless}:
        (QdotED*Pao_O2-QdotDC*PD_O2)/VD*1.0000000000000002e-6{dimensionless};
      otherwise:
        (QdotED*PD_O2-QdotDC*PC_O2)/VD*1.0000000000000002e-6{dimensionless};
    endsel;
    ode(PC_O2, time) = sel
      case dVAdt > 0{dimensionless}:
        (QdotDC*PD_O2-QdotCA*PC_O2-PC_O2*dVcdt*1000000.0000000001{dimensionless})/Vc*1.0000000000000002e-6{dimensionless};
      otherwise:
        (QdotDC*PC_O2-QdotCA*PA_O2-PC_O2*dVcdt*1000000.0000000001{dimensionless})/Vc*1.0000000000000002e-6{dimensionless};
    endsel;
    ode(PA_O2, time) = sel
      case dVAdt > 0{dimensionless}:
        ((QdotCA*PC_O2-PA_O2*dVAdt*1000000.0000000001{dimensionless})/VA-Pstp*Tbody/Tstp*O2flux/VA*0.01666666666666667{dimensionless})*1.0000000000000002e-6{dimensionless};
      otherwise:
        ((QdotCA*PA_O2-PA_O2*dVAdt*1000000.0000000001{dimensionless})/VA-Pstp*Tbody/Tstp*O2flux/VA*0.01666666666666667{dimensionless})*1.0000000000000002e-6{dimensionless};
    endsel;
    ode(PD_CO2, time) = sel
      case dVAdt > 0{dimensionless}:
        (QdotED*Pao_CO2-QdotDC*PD_CO2)/VD*1.0000000000000002e-6{dimensionless};
      otherwise:
        (QdotED*PD_CO2-QdotDC*PC_CO2)/VD*1.0000000000000002e-6{dimensionless};
    endsel;
    ode(PC_CO2, time) = sel
      case dVAdt > 0{dimensionless}:
        (QdotDC*PD_CO2-QdotCA*PC_CO2-PC_CO2*dVcdt*1000000.0000000001{dimensionless})/Vc*1.0000000000000002e-6{dimensionless};
      otherwise:
        (QdotDC*PC_CO2-QdotCA*PA_CO2-PC_CO2*dVcdt*1000000.0000000001{dimensionless})/Vc*1.0000000000000002e-6{dimensionless};
    endsel;
    ode(PA_CO2, time) = sel
      case dVAdt > 0{dimensionless}:
        ((QdotCA*PC_CO2-PA_CO2*dVAdt*1000000.0000000001{dimensionless})/VA-Pstp*Tbody/Tstp*CO2flux/VA*0.01666666666666667{dimensionless})*1.0000000000000002e-6{dimensionless};
      otherwise:
        ((QdotCA*PA_CO2-PA_CO2*dVAdt*1000000.0000000001{dimensionless})/VA-Pstp*Tbody/Tstp*CO2flux/VA*0.01666666666666667{dimensionless})*1.0000000000000002e-6{dimensionless};
    endsel;
  enddef;

  def group as containment for
    comp SAmembrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp ACh_dependent_potassium_current incl
        comp ACh_dependent_potassium_current_y_gate;
      endcomp;
      comp time_independent_potassium_current;
      comp transient_outward_K_current incl
        comp transient_outward_K_current_oa_gate;
        comp transient_outward_K_current_oi_gate;
      endcomp;
      comp ultrarapid_delayed_rectifier_K_current incl
        comp ultrarapid_delayed_rectifier_K_current_ua_gate;
        comp ultrarapid_delayed_rectifier_K_current_ui_gate;
      endcomp;
      comp rapid_delayed_rectifier_K_current incl
        comp rapid_delayed_rectifier_K_current_xr_gate;
      endcomp;
      comp slow_delayed_rectifier_K_current incl
        comp slow_delayed_rectifier_K_current_xs_gate;
      endcomp;
      comp T_type_Ca_channel incl
        comp T_type_Ca_channel_d_gate;
        comp T_type_Ca_channel_f_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_gate;
        comp L_type_Ca_channel_f_gate;
        comp L_type_Ca_channel_f_Ca_gate;
      endcomp;
      comp sodium_potassium_pump;
      comp background_currents;
      comp Na_Ca_exchanger_current;
      comp sarcolemmal_calcium_pump_current;
      comp Ca_release_current_from_JSR incl
        comp Ca_release_current_from_JSR_u_gate;
        comp Ca_release_current_from_JSR_v_gate;
        comp Ca_release_current_from_JSR_w_gate;
      endcomp;
      comp transfer_current_from_NSR_to_JSR;
      comp Ca_uptake_current_by_the_NSR;
      comp Ca_leak_current_by_the_NSR;
      comp Ca_buffers;
      comp intracellular_ion_concentrations;
      comp standard_ionic_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp transient_outward_K_current incl
      comp transient_outward_K_current_oa_gate;
      comp transient_outward_K_current_oi_gate;
    endcomp;
    comp ultrarapid_delayed_rectifier_K_current incl
      comp ultrarapid_delayed_rectifier_K_current_ua_gate;
      comp ultrarapid_delayed_rectifier_K_current_ui_gate;
    endcomp;
    comp rapid_delayed_rectifier_K_current incl
      comp rapid_delayed_rectifier_K_current_xr_gate;
    endcomp;
    comp slow_delayed_rectifier_K_current incl
      comp slow_delayed_rectifier_K_current_xs_gate;
    endcomp;
    comp T_type_Ca_channel incl
      comp T_type_Ca_channel_d_gate;
      comp T_type_Ca_channel_f_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
      comp L_type_Ca_channel_f_Ca_gate;
    endcomp;
    comp ACh_dependent_potassium_current incl
      comp ACh_dependent_potassium_current_y_gate;
    endcomp;
    comp Ca_release_current_from_JSR incl
      comp Ca_release_current_from_JSR_u_gate;
      comp Ca_release_current_from_JSR_v_gate;
      comp Ca_release_current_from_JSR_w_gate;
    endcomp;
  enddef;
  def map between additional_currents and Cai for
    vars Cai and Cai;
  enddef;
  def map between LATiming and SAmembrane for
    vars ISAin and ISAout_atrium;
  enddef;
  def map between RATiming and SAmembrane for
    vars ISAin and ISAout_atrium;
  enddef;
  def map between total_membrane_current and SAmembrane for
    vars ISAstim and ISAout;
  enddef;
  def map between ACh_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between ACh_dependent_potassium_current and SAmembrane for
    vars Vm and V;
    vars i_KACh and i_KACh;
    vars Cm and Cm;
  enddef;
  def map between time_independent_potassium_current and ACh_dependent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between ACh_dependent_potassium_current and ACh_dependent_potassium_current_y_gate for
    vars y and y;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between funny_current and SAmembrane for
    vars V and V;
    vars i_f and i_f;
  enddef;
  def map between funny_current and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and SAmembrane for
    vars V and V;
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_d_gate for
    vars d_T and d_T;
    vars V and V;
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_f_gate for
    vars f_T and f_T;
    vars V and V;
    vars time and time;
  enddef;
  def map between SAmembrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_K_current and environment for
    vars time and time;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifier_K_current and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifier_K_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between Ca_release_current_from_JSR and environment for
    vars time and time;
  enddef;
  def map between transfer_current_from_NSR_to_JSR and environment for
    vars time and time;
  enddef;
  def map between Ca_uptake_current_by_the_NSR and environment for
    vars time and time;
  enddef;
  def map between Ca_leak_current_by_the_NSR and environment for
    vars time and time;
  enddef;
  def map between Ca_buffers and environment for
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between SAmembrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between SAmembrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between SAmembrane and transient_outward_K_current for
    vars V and V;
    vars i_to and i_to;
    vars Cm and Cm;
  enddef;
  def map between SAmembrane and ultrarapid_delayed_rectifier_K_current for
    vars V and V;
    vars i_Kur and i_Kur;
    vars Cm and Cm;
  enddef;
  def map between SAmembrane and rapid_delayed_rectifier_K_current for
    vars V and V;
    vars i_Kr and i_Kr;
    vars Cm and Cm;
  enddef;
  def map between SAmembrane and slow_delayed_rectifier_K_current for
    vars V and V;
    vars i_Ks and i_Ks;
    vars Cm and Cm;
  enddef;
  def map between SAmembrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
    vars Cm and Cm;
  enddef;
  def map between SAmembrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between SAmembrane and background_currents for
    vars V and V;
    vars i_B_Ca and i_B_Ca;
    vars i_B_Na and i_B_Na;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between SAmembrane and Na_Ca_exchanger_current for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between SAmembrane and sarcolemmal_calcium_pump_current for
    vars i_CaP and i_CaP;
    vars Cm and Cm;
  enddef;
  def map between Ca_release_current_from_JSR and SAmembrane for
    vars V and V;
    vars F and F;
  enddef;
  def map between SAmembrane and intracellular_ion_concentrations for
    vars F and F;
  enddef;
  def map between fast_sodium_current and intracellular_ion_concentrations for
    vars i_Na and i_Na;
    vars Na_i and Na_i;
  enddef;
  def map between fast_sodium_current and standard_ionic_concentrations for
    vars Na_o and Na_o;
  enddef;
  def map between fast_sodium_current and background_currents for
    vars E_Na and E_Na;
  enddef;
  def map between time_independent_potassium_current and intracellular_ion_concentrations for
    vars i_K1 and i_K1;
    vars K_i and K_i;
  enddef;
  def map between time_independent_potassium_current and standard_ionic_concentrations for
    vars K_o and K_o;
  enddef;
  def map between time_independent_potassium_current and transient_outward_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and background_currents for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and ultrarapid_delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and rapid_delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and slow_delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and transient_outward_K_current for
    vars K_Q10 and K_Q10;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and intracellular_ion_concentrations for
    vars i_Kur and i_Kur;
  enddef;
  def map between rapid_delayed_rectifier_K_current and intracellular_ion_concentrations for
    vars i_Kr and i_Kr;
  enddef;
  def map between slow_delayed_rectifier_K_current and intracellular_ion_concentrations for
    vars i_Ks and i_Ks;
  enddef;
  def map between intracellular_ion_concentrations and transient_outward_K_current for
    vars i_to and i_to;
  enddef;
  def map between L_type_Ca_channel and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between L_type_Ca_channel and Ca_release_current_from_JSR for
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between sodium_potassium_pump and intracellular_ion_concentrations for
    vars Na_i and Na_i;
    vars i_NaK and i_NaK;
  enddef;
  def map between sodium_potassium_pump and standard_ionic_concentrations for
    vars Na_o and Na_o;
    vars K_o and K_o;
  enddef;
  def map between background_currents and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars i_B_Ca and i_B_Ca;
    vars i_B_Na and i_B_Na;
    vars i_B_K and i_B_K;
  enddef;
  def map between background_currents and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between Na_Ca_exchanger_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger_current and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between Na_Ca_exchanger_current and Ca_release_current_from_JSR for
    vars i_NaCa and i_NaCa;
  enddef;
  def map between sarcolemmal_calcium_pump_current and intracellular_ion_concentrations for
    vars i_CaP and i_CaP;
    vars Ca_i and Ca_i;
  enddef;
  def map between intracellular_ion_concentrations and Ca_release_current_from_JSR for
    vars i_rel and i_rel;
    vars Ca_i and Ca_i;
    vars Ca_rel and Ca_rel;
    vars V_rel and V_rel;
  enddef;
  def map between intracellular_ion_concentrations and transfer_current_from_NSR_to_JSR for
    vars i_tr and i_tr;
    vars Ca_up and Ca_up;
    vars Ca_rel and Ca_rel;
  enddef;
  def map between intracellular_ion_concentrations and Ca_uptake_current_by_the_NSR for
    vars i_up and i_up;
    vars Ca_i and Ca_i;
  enddef;
  def map between Ca_leak_current_by_the_NSR and Ca_uptake_current_by_the_NSR for
    vars I_up_max and I_up_max;
  enddef;
  def map between Ca_leak_current_by_the_NSR and intracellular_ion_concentrations for
    vars i_up_leak and i_up_leak;
    vars Ca_up and Ca_up;
  enddef;
  def map between Ca_buffers and intracellular_ion_concentrations for
    vars CMDN_max and CMDN_max;
    vars CSQN_max and CSQN_max;
    vars TRPN_max and TRPN_max;
    vars Km_CMDN and Km_CMDN;
    vars Km_CSQN and Km_CSQN;
    vars Km_TRPN and Km_TRPN;
    vars Ca_i and Ca_i;
    vars Ca_rel and Ca_rel;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars time and time;
    vars V and V;
    vars Ca_i and Ca_i;
  enddef;
  def map between transient_outward_K_current and transient_outward_K_current_oa_gate for
    vars oa and oa;
    vars time and time;
    vars V and V;
    vars K_Q10 and K_Q10;
  enddef;
  def map between transient_outward_K_current and transient_outward_K_current_oi_gate for
    vars oi and oi;
    vars time and time;
    vars V and V;
    vars K_Q10 and K_Q10;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and ultrarapid_delayed_rectifier_K_current_ua_gate for
    vars ua and ua;
    vars time and time;
    vars V and V;
    vars K_Q10 and K_Q10;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and ultrarapid_delayed_rectifier_K_current_ui_gate for
    vars ui and ui;
    vars time and time;
    vars V and V;
    vars K_Q10 and K_Q10;
  enddef;
  def map between rapid_delayed_rectifier_K_current and rapid_delayed_rectifier_K_current_xr_gate for
    vars xr and xr;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_delayed_rectifier_K_current and slow_delayed_rectifier_K_current_xs_gate for
    vars xs and xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_release_current_from_JSR and Ca_release_current_from_JSR_u_gate for
    vars u and u;
    vars time and time;
    vars V and V;
    vars Fn and Fn;
  enddef;
  def map between Ca_release_current_from_JSR and Ca_release_current_from_JSR_v_gate for
    vars v and v;
    vars time and time;
    vars V and V;
    vars Fn and Fn;
  enddef;
  def map between Ca_release_current_from_JSR and Ca_release_current_from_JSR_w_gate for
    vars w and w;
    vars time and time;
    vars V and V;
  enddef;
  def map between LeftVentricle and NL_model for
    vars P_LVin and P_LV;
    vars V_LV and V_LV;
  enddef;
  def map between RightVentricle and NL_model for
    vars P_LV and P_LV;
  enddef;
  def map between RightVentricle and LeftVentricle for
    vars V_LV and V_LV;
  enddef;
  def map between GutIntestine and Liver for
    vars F_GIV and F_GIV;
    vars conc_X_GI and conc_X_GI;
    vars P_LI and P_LI;
  enddef;
  def map between Skin and environment for
    vars time and time;
  enddef;
  def map between Skin and Arteries for
    vars P_AR and P_AR;
    vars F_SK and F_SK;
    vars conc_X_AR and conc_X_AR;
  enddef;
  def map between Skin and Veins for
    vars P_VE and P_VE;
    vars F_SKV and F_SKV;
    vars conc_X_SK and conc_X_SK;
  enddef;
  def map between LeftAtrium and PulmonaryVein for
    vars P_PV and P_PV;
    vars F_LA and F_LA;
    vars conc_X_PV and conc_X_PV;
  enddef;
  def map between LeftAtrium and LeftVentricle for
    vars F_LV and F_LV;
    vars P_LA and P_LA;
    vars conc_X_LA and conc_X_LA;
  enddef;
  def map between LeftVentricle and environment for
    vars time and time;
  enddef;
  def map between Aorta and NL_model for
    vars P_LV and P_LV;
  enddef;
  def map between LeftVentricle and Aorta for
    vars F_AO and F_AO;
    vars conc_X_LV and conc_X_LV;
  enddef;
  def map between CoronaryCirc and NL_model for
    vars P_LV and P_LV;
  enddef;
  def map between LeftVentricle and CoronaryCirc for
    vars F_CO and F_CO;
    vars conc_X_LV and conc_X_LV;
  enddef;
  def map between Aorta and environment for
    vars time and time;
  enddef;
  def map between Aorta and Arteries for
    vars F_AR and F_AR;
    vars P_AO and P_AO;
    vars conc_X_AO and conc_X_AO;
  enddef;
  def map between Aorta and CarotidCirc for
    vars F_CR and F_CR;
    vars P_AO and P_AO;
    vars conc_X_AO and conc_X_AO;
  enddef;
  def map between CoronaryCirc and environment for
    vars time and time;
  enddef;
  def map between CoronaryCirc and RightAtrium for
    vars P_RA and P_RA;
    vars F_COV and F_COV;
    vars conc_X_CO and conc_X_CO;
  enddef;
  def map between CarotidCirc and environment for
    vars time and time;
  enddef;
  def map between CarotidCirc and VenaCava for
    vars P_VC and P_VC;
    vars F_CRV and F_CRV;
    vars conc_X_CR and conc_X_CR;
  enddef;
  def map between Arteries and environment for
    vars time and time;
  enddef;
  def map between Arteries and Adipose for
    vars P_AR and P_AR;
    vars F_AD and F_AD;
    vars conc_X_AR and conc_X_AR;
  enddef;
  def map between Arteries and Muscle for
    vars P_AR and P_AR;
    vars F_MU and F_MU;
    vars conc_X_AR and conc_X_AR;
  enddef;
  def map between Arteries and GutIntestine for
    vars P_AR and P_AR;
    vars F_GI and F_GI;
    vars conc_X_AR and conc_X_AR;
  enddef;
  def map between Arteries and Liver for
    vars P_AR and P_AR;
    vars F_LI and F_LI;
    vars conc_X_AR and conc_X_AR;
  enddef;
  def map between Arteries and Kidney for
    vars P_AR and P_AR;
    vars F_KI and F_KI;
    vars conc_X_AR and conc_X_AR;
  enddef;
  def map between Arteries and OtherTissue for
    vars P_AR and P_AR;
    vars F_OT and F_OT;
    vars conc_X_AR and conc_X_AR;
  enddef;
  def map between Adipose and environment for
    vars time and time;
  enddef;
  def map between Adipose and Veins for
    vars P_VE and P_VE;
    vars F_ADV and F_ADV;
    vars conc_X_AD and conc_X_AD;
  enddef;
  def map between Muscle and environment for
    vars time and time;
  enddef;
  def map between Muscle and Veins for
    vars P_VE and P_VE;
    vars F_MUV and F_MUV;
    vars conc_X_MU and conc_X_MU;
  enddef;
  def map between GutIntestine and environment for
    vars time and time;
  enddef;
  def map between Liver and environment for
    vars time and time;
  enddef;
  def map between Liver and Veins for
    vars P_VE and P_VE;
    vars F_LIV and F_LIV;
    vars conc_X_LI and conc_X_LI;
  enddef;
  def map between Kidney and environment for
    vars time and time;
  enddef;
  def map between Kidney and Veins for
    vars P_VE and P_VE;
    vars F_KIV and F_KIV;
    vars conc_X_KI and conc_X_KI;
  enddef;
  def map between OtherTissue and environment for
    vars time and time;
  enddef;
  def map between OtherTissue and Veins for
    vars P_VE and P_VE;
    vars F_OTV and F_OTV;
    vars conc_X_OT and conc_X_OT;
  enddef;
  def map between Veins and environment for
    vars time and time;
  enddef;
  def map between Veins and VenaCava for
    vars P_VC and P_VC;
    vars F_VEV and F_VEV;
    vars conc_X_VE and conc_X_VE;
  enddef;
  def map between VenaCava and environment for
    vars time and time;
  enddef;
  def map between VenaCava and RightAtrium for
    vars P_RA and P_RA;
    vars F_VCV and F_VCV;
    vars conc_X_VC and conc_X_VC;
  enddef;
  def map between RATiming and environment for
    vars realtime and time;
    vars HR and HR;
    vars hrf and hrf;
  enddef;
  def map between RAElastanceFunction and environment for
    vars hrf and hrf;
  enddef;
  def map between RATiming and RAElastanceFunction for
    vars beattime and time;
  enddef;
  def map between RightAtrium and environment for
    vars time and time;
  enddef;
  def map between RAElastanceFunction and RightAtrium for
    vars E_RA and E_RA;
  enddef;
  def map between RightAtrium and RightVentricle for
    vars F_RV and F_RV;
    vars P_RA and P_RA;
    vars conc_X_RA and conc_X_RA;
  enddef;
  def map between RightVentricle and environment for
    vars time and time;
  enddef;
  def map between RightVentricle and PulmonaryArtery for
    vars F_PA and F_PA;
    vars P_RV and P_RV;
    vars conc_X_RV and conc_X_RV;
  enddef;
  def map between PulmonaryArtery and environment for
    vars time and time;
  enddef;
  def map between PulmonaryArteries and environment for
    vars time and time;
  enddef;
  def map between PulmonaryArteries and PulmonaryCapillaries for
    vars F_PC and F_PC;
    vars P_Pa and P_Pa;
    vars conc_X_Pa and conc_X_Pa;
  enddef;
  def map between PulmonaryArteries and Shunt for
    vars F_SH and F_SH;
    vars P_Pa and P_Pa;
  enddef;
  def map between PulmonaryArteries and PulmonaryArtery for
    vars P_PA and P_PA;
    vars F_Pa and F_Pa;
    vars conc_X_PA and conc_X_PA;
  enddef;
  def map between Shunt and environment for
    vars time and time;
  enddef;
  def map between Shunt and PulmonaryCapillaries for
    vars P_PC and P_PC;
  enddef;
  def map between Shunt and PulmonaryVein for
    vars F_SH and F_SH;
  enddef;
  def map between PulmonaryCapillaries and environment for
    vars time and time;
  enddef;
  def map between PulmonaryCapillaries and PulmonaryVein for
    vars P_PV and P_PV;
    vars F_PCV and F_PCV;
    vars conc_X_PC and conc_X_PC;
  enddef;
  def map between PulmonaryVein and environment for
    vars time and time;
  enddef;
  def map between PulmonaryVein and PulmonaryArteries for
    vars conc_X_Pa and conc_X_Pa;
  enddef;
  def map between LATiming and environment for
    vars realtime and time;
    vars HR and HR;
    vars hrf and hrf;
  enddef;
  def map between LAElastanceFunction and environment for
    vars hrf and hrf;
  enddef;
  def map between LAElastanceFunction and LATiming for
    vars time and beattime;
  enddef;
  def map between LAElastanceFunction and LeftAtrium for
    vars E_LA and E_LA;
  enddef;
  def map between LeftAtrium and environment for
    vars time and time;
  enddef;
  def map between NL_model and Cai for
    vars Cai_in and Cai;
  enddef;
  def map between NL_model and environment for
    vars time and time;
  enddef;
  def map between K1_gate and EK for
    vars E_K and reversal_potential;
  enddef;
  def map between r_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between s_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between Xr1_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between Xr2_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between Xs_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between d_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between f_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between fCa_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between g_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between g_gate and Cai for
    vars Cai and Cai;
  enddef;
  def map between g_gate and default_parameters for
    vars tau_g and tau_g;
  enddef;
  def map between membrane_potential and environment for
    vars time and time;
  enddef;
  def map between default_parameters and membrane_potential for
    vars Cm and Cm;
  enddef;
  def map between total_membrane_current and additional_currents for
    vars ICa_additional and ICa_additional;
    vars INa_additional and INa_additional;
    vars IK_additional and IK_additional;
  enddef;
  def map between default_parameters and K_flux for
    vars vC and vC;
    vars Am and Am;
  enddef;
  def map between additional_currents and K_flux for
    vars IK_additional and IK_additional;
  enddef;
  def map between default_parameters and Na_flux for
    vars vC and vC;
    vars Am and Am;
  enddef;
  def map between additional_currents and Na_flux for
    vars INa_additional and INa_additional;
  enddef;
  def map between default_parameters and Ca_flux for
    vars vC and vC;
    vars Am and Am;
  enddef;
  def map between additional_currents and Ca_flux for
    vars ICa_additional and ICa_additional;
  enddef;
  def map between Ca_SR_flux and additional_currents for
    vars JCaSR_additional and JCaSR_additional;
  enddef;
  def map between INa and environment for
    vars time and time;
  enddef;
  def map between default_parameters and INa for
    vars g_Na and g_Na;
  enddef;
  def map between IK1 and default_parameters for
    vars g_K1 and g_K1;
    vars Ko and Ko;
  enddef;
  def map between default_parameters and Ito for
    vars g_to and g_to;
  enddef;
  def map between Ito and environment for
    vars time and time;
  enddef;
  def map between default_parameters and IKr for
    vars g_Kr and g_Kr;
    vars Ko and Ko;
  enddef;
  def map between IKr and environment for
    vars time and time;
  enddef;
  def map between default_parameters and IKs for
    vars g_Ks and g_Ks;
  enddef;
  def map between IKs and environment for
    vars time and time;
  enddef;
  def map between default_parameters and INaK for
    vars P_NaK and P_NaK;
    vars K_mNa and K_mNa;
    vars K_mK and K_mK;
    vars temperature and T;
    vars Ko and Ko;
  enddef;
  def map between default_parameters and IpK for
    vars g_pK and g_pK;
  enddef;
  def map between default_parameters and IbNa for
    vars g_bNa and g_bNa;
  enddef;
  def map between default_parameters and ICaL for
    vars g_CaL and g_CaL;
    vars Cao and Cao;
    vars temperature and T;
  enddef;
  def map between ICaL and environment for
    vars time and time;
  enddef;
  def map between default_parameters and IpCa for
    vars g_pCa and g_pCa;
    vars K_pCa and K_pCa;
  enddef;
  def map between default_parameters and INaCa for
    vars k_NaCa and k_NaCa;
    vars K_mNai and K_mNai;
    vars K_mCa and K_mCa;
    vars k_sat and k_sat;
    vars gamma and gamma;
    vars alpha and alpha;
    vars temperature and T;
    vars Nao and Nao;
    vars Cao and Cao;
  enddef;
  def map between default_parameters and IbCa for
    vars g_bCa and g_bCa;
  enddef;
  def map between default_parameters and ENa for
    vars temperature and T;
    vars Nao and extracellular_concentration;
  enddef;
  def map between default_parameters and EK for
    vars temperature and T;
    vars Ko and extracellular_concentration;
  enddef;
  def map between default_parameters and ECa for
    vars temperature and T;
    vars Cao and extracellular_concentration;
  enddef;
  def map between default_parameters and EKs for
    vars temperature and T;
    vars Ko and extracellular_concentration_1;
    vars Nao and extracellular_concentration_2;
    vars p_KNa and multiplier_2;
  enddef;
  def map between environment and Nai for
    vars time and time;
  enddef;
  def map between environment and Ki for
    vars time and time;
  enddef;
  def map between Cai and default_parameters for
    vars Bufc and Bufc;
    vars Kbufc and Kbufc;
    vars Bufsr and Bufsr;
    vars Kbufsr and Kbufsr;
    vars vSR and vSR;
    vars vC and vC;
    vars Am and Am;
    vars Capacitance and Cm;
  enddef;
  def map between Cai and environment for
    vars time and time;
  enddef;
  def map between Jleak and default_parameters for
    vars V_leak and V_leak;
  enddef;
  def map between default_parameters and Jup for
    vars Vmax_up and Vmax_up;
    vars K_up and K_up;
  enddef;
  def map between default_parameters and Jrel for
    vars a_rel and a_rel;
    vars b_rel and b_rel;
    vars c_rel and c_rel;
    vars tau_g and tau_g;
  enddef;
  def map between Jrel and environment for
    vars time and time;
  enddef;
  def map between m_gate and environment for
    vars time and time;
  enddef;
  def map between m_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between h_gate and environment for
    vars time and time;
  enddef;
  def map between h_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between j_gate and environment for
    vars time and time;
  enddef;
  def map between j_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between K1_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between r_gate and environment for
    vars time and time;
  enddef;
  def map between s_gate and environment for
    vars time and time;
  enddef;
  def map between Xr1_gate and environment for
    vars time and time;
  enddef;
  def map between Xr2_gate and environment for
    vars time and time;
  enddef;
  def map between Xs_gate and environment for
    vars time and time;
  enddef;
  def map between d_gate and environment for
    vars time and time;
  enddef;
  def map between f_gate and environment for
    vars time and time;
  enddef;
  def map between fCa_gate and environment for
    vars time and time;
  enddef;
  def map between g_gate and environment for
    vars time and time;
  enddef;
  def map between membrane_potential and default_initial_conditions for
    vars V_initial and V_initial;
  enddef;
  def map between membrane_potential and total_membrane_current for
    vars Itotal and Itotal;
  enddef;
  def map between membrane_potential and INa for
    vars V and V;
  enddef;
  def map between membrane_potential and IK1 for
    vars V and V;
  enddef;
  def map between membrane_potential and IKr for
    vars V and V;
  enddef;
  def map between membrane_potential and IKs for
    vars V and V;
  enddef;
  def map between membrane_potential and INaK for
    vars V and V;
  enddef;
  def map between membrane_potential and IpK for
    vars V and V;
  enddef;
  def map between membrane_potential and IbNa for
    vars V and V;
  enddef;
  def map between membrane_potential and ICaL for
    vars V and V;
  enddef;
  def map between membrane_potential and INaCa for
    vars V and V;
  enddef;
  def map between membrane_potential and IbCa for
    vars V and V;
  enddef;
  def map between membrane_potential and Jrel for
    vars V and V;
  enddef;
  def map between total_membrane_current and INa for
    vars INa and INa;
  enddef;
  def map between total_membrane_current and IK1 for
    vars IK1 and IK1;
  enddef;
  def map between total_membrane_current and Ito for
    vars Ito and Ito;
  enddef;
  def map between total_membrane_current and IKr for
    vars IKr and IKr;
  enddef;
  def map between total_membrane_current and IKs for
    vars IKs and IKs;
  enddef;
  def map between total_membrane_current and INaK for
    vars INaK and INaK;
  enddef;
  def map between total_membrane_current and IpK for
    vars IpK and IpK;
  enddef;
  def map between total_membrane_current and IbNa for
    vars IbNa and IbNa;
  enddef;
  def map between total_membrane_current and ICaL for
    vars ICaL and ICaL;
  enddef;
  def map between total_membrane_current and IpCa for
    vars IpCa and IpCa;
  enddef;
  def map between total_membrane_current and INaCa for
    vars INaCa and INaCa;
  enddef;
  def map between total_membrane_current and IbCa for
    vars IbCa and IbCa;
  enddef;
  def map between INa and ENa for
    vars E_Na and reversal_potential;
  enddef;
  def map between INaK and ENa for
    vars F and F;
    vars R and R;
  enddef;
  def map between IbNa and ENa for
    vars E_Na and reversal_potential;
  enddef;
  def map between INaCa and ENa for
    vars F and F;
    vars R and R;
  enddef;
  def map between ENa and Nai for
    vars intracellular_concentration and Nai;
  enddef;
  def map between ENa and Na_flux for
    vars F and F;
  enddef;
  def map between Nai and Na_flux for
    vars Na_flux and Na_flux;
  enddef;
  def map between Na_flux and INa for
    vars INa and INa;
  enddef;
  def map between Nai and INaK for
    vars Nai and Nai;
  enddef;
  def map between Na_flux and INaK for
    vars INaK and INaK;
  enddef;
  def map between Na_flux and IbNa for
    vars IbNa and IbNa;
  enddef;
  def map between Nai and INaCa for
    vars Nai and Nai;
  enddef;
  def map between Na_flux and INaCa for
    vars INaCa and INaCa;
  enddef;
  def map between Ito and EK for
    vars E_K and reversal_potential;
  enddef;
  def map between IKr and EK for
    vars E_K and reversal_potential;
  enddef;
  def map between IKs and EKs for
    vars E_Ks and reversal_potential;
  enddef;
  def map between IpK and EK for
    vars E_K and reversal_potential;
  enddef;
  def map between EK and Ki for
    vars intracellular_concentration and Ki;
  enddef;
  def map between EK and K_flux for
    vars F and F;
  enddef;
  def map between EKs and Ki for
    vars intracellular_concentration_1 and Ki;
  enddef;
  def map between EKs and Nai for
    vars intracellular_concentration_2 and Nai;
  enddef;
  def map between Ki and K_flux for
    vars K_flux and K_flux;
  enddef;
  def map between K_flux and IK1 for
    vars IK1 and IK1;
  enddef;
  def map between K_flux and Ito for
    vars Ito and Ito;
  enddef;
  def map between K_flux and IKr for
    vars IKr and IKr;
  enddef;
  def map between K_flux and IKs for
    vars IKs and IKs;
  enddef;
  def map between K_flux and IpK for
    vars IpK and IpK;
  enddef;
  def map between K_flux and INaK for
    vars INaK and INaK;
  enddef;
  def map between ICaL and ECa for
    vars F and F;
    vars R and R;
  enddef;
  def map between IbCa and ECa for
    vars E_Ca and reversal_potential;
  enddef;
  def map between ECa and Cai for
    vars intracellular_concentration and Cai;
    vars F and F;
  enddef;
  def map between ECa and Ca_flux for
    vars F and F;
  enddef;
  def map between Ca_flux and Cai for
    vars Ca_flux and Ca_flux;
  enddef;
  def map between Ca_SR_flux and Cai for
    vars Ca_SR_flux and Ca_SR_flux;
  enddef;
  def map between Cai and IpCa for
    vars Cai and Cai;
  enddef;
  def map between Cai and INaCa for
    vars Cai and Cai;
  enddef;
  def map between Cai and Jleak for
    vars Cai and Cai;
    vars CaSR and CaSR;
  enddef;
  def map between Cai and Jup for
    vars Cai and Cai;
  enddef;
  def map between Cai and Jrel for
    vars Cai and Cai;
    vars CaSR and CaSR;
  enddef;
  def map between Jrel and d_gate for
    vars d and d;
  enddef;
  def map between Ca_flux and ICaL for
    vars ICaL and ICaL;
  enddef;
  def map between Ca_flux and IpCa for
    vars IpCa and IpCa;
  enddef;
  def map between Ca_flux and INaCa for
    vars INaCa and INaCa;
  enddef;
  def map between Ca_flux and IbCa for
    vars IbCa and IbCa;
  enddef;
  def map between Ca_SR_flux and Jleak for
    vars Jleak and Jleak;
  enddef;
  def map between Ca_SR_flux and Jup for
    vars Jup and Jup;
  enddef;
  def map between Ca_SR_flux and Jrel for
    vars Jrel and Jrel;
  enddef;
  def map between INa and m_gate for
    vars m and m;
  enddef;
  def map between INa and h_gate for
    vars h and h;
  enddef;
  def map between INa and j_gate for
    vars j and j;
  enddef;
  def map between IK1 and K1_gate for
    vars K1_infinity and K1_infinity;
  enddef;
  def map between IK1 and EK for
    vars E_K and reversal_potential;
  enddef;
  def map between Ito and r_gate for
    vars r and r;
  enddef;
  def map between Ito and membrane_potential for
    vars V and V;
  enddef;
  def map between Ito and s_gate for
    vars s and s;
  enddef;
  def map between IKr and Xr1_gate for
    vars Xr1 and Xr1;
  enddef;
  def map between IKr and Xr2_gate for
    vars Xr2 and Xr2;
  enddef;
  def map between IKs and Xs_gate for
    vars Xs and Xs;
  enddef;
  def map between ICaL and d_gate for
    vars d and d;
  enddef;
  def map between ICaL and f_gate for
    vars f and f;
  enddef;
  def map between ICaL and Cai for
    vars Cai and Cai;
  enddef;
  def map between fCa_gate and Cai for
    vars Cai and Cai;
  enddef;
  def map between ICaL and fCa_gate for
    vars fCa and fCa;
  enddef;
  def map between Jrel and g_gate for
    vars g and g;
  enddef;
  def map between Muscle and lung for
    vars V_MU and V_MU;
    vars F_MU and F_MU;
  enddef;
  def map between lung and PulmonaryCapillaries for
    vars F_PC and F_PC;
    vars V_PC and V_PC;
  enddef;
  def map between environment and lung for
    vars time and time;
  enddef;
enddef;
