// created: W3CDTF 2009-10-08
// creator: c.lloyd@auckland.ac.nz; Orgunit Auckland Bioengineering Institute; Orgname The University of Auckland; Given Catherine; Other May; Family Lloyd
// comment: FN Catherine Lloyd; This is the CellML description of Aslanidi et al.'s mathematical model of of the caninine Purkinje-ventricular junction
// title: The Aslanidi et al. 2009 model of the caninine Purkinje-ventricular junction
// reference: Given O; Other V; Family Aslanidi; Given P; Family Stewart; Given M; Other R; Family Boyett; Given H; Family Zhang; title Optimal velocity and safety of discontinuous conduction through the heterogeneous Purkinje-ventricular junction; W3CDTF 2009-07-08; last_page 39; volume 97; first_page 20; title Biophysical Journal; Pubmed_id 19580741
// reference: _1 electrophysiology; _2 cardiac; subject_type keyword
// simulation: maximumStepSize 0.1; endingValue 1000; pointDensity 100000
// species: Canine
// bio_entity: Purkinje fibre
// bio_entity: ventricular myocyte
def model aslanidi_2009 as
  // Optimal velocity and safety of discontinuous conduction through the heterogeneous Purkinje-ventricular junction
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both COR and PCEnv to reproduce the published results. The CellML model has been based on both the published paper and the original C Code the model was written in. Our thanks go to the authors Oleg and Philip for their help in curating the CellML model and getting it to reproduce their original results.
  //
  // Model Structure
  //
  // ABSTRACT: Slow and discontinuous wave conduction through non-uniform junctions in cardiac tissues is generally considered unsafe and pro-arrythmogenic. However, the relationships between tissue structure, wave conduction velocity and safety at such junctions are unknown. We develop a structurally and electrophysiologically detailed model of the canine Purkinje-ventricular junction (PVJ) and vary its heterogeneity parameters in order to determine such relationships. We show that neither very fast nor very slow conduction is safe, and there exists an optimal velocity providing the maximum safety factor of conduction through the junction. The resultant conduction time delay across the PVJ is a natural consequence of the electrophysiological and morphological differences between the Purkinje fibre and ventricular tissue. The delay allows the PVJ to accumulate and pass sufficient charge to excite the adjacent ventricular tissue, but is not long enough for the source-to-load mismatch at the junction to be enhanced over time. The observed relationships between the conduction velocity and safety factor can provide new insights into optimal conditions for wave propagation through non-uniform junctions between various cardiac tissues.
  //
  // model diagram
  //
  // Schematic diagram of the cell model.
  //
  // The original paper reference is cited below:
  //
  // Optimal velocity and safety of discontinuous conduction through the heterogeneous Purkinje-ventricular junction, Oleg V. Aslanidi, Philip Stewart, Mark R. Boyett and Henggui Zhang, 2009, Biophysical Journal, volume 97, 20-39. PubMed ID: 19580741 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=19580741&query_hl=1&itool=pubmed_docsum)
  // i_Na
  //
  // fast sodium current
  // i_Na_L
  //
  // late sodium current
  // i_Ca_L
  //
  // L-type calcium current
  // i_Ca_T
  //
  // T-type calcium current
  // i_to_1
  //
  // transient outward potassium current
  // i_Kr
  //
  // fast delayed rectifier potassium current
  // i_Ks
  //
  // slow delayed rectifier potassium current
  // i_K1
  //
  // inward rectifier potassium current
  // i_K_p
  //
  // plateau potassium current
  // i_to_2
  //
  // calcium-dependent transient outward chloride current
  // i_NaCa
  //
  // sodium-calcium exchanger current
  // i_NaK
  //
  // sodium-potassium pump current
  // i_Ca_p
  //
  // calcium pump current
  // CT_K_Cl
  //
  // potassium-chloride cotransporter
  // CT_Na_Cl
  //
  // sodium-chloride cotransporter
  // background_currents
  //
  // background currents
  // intracellular_ion_concentrations
  //
  // intracellular ion concentrations
  // Ca_i
  //
  // intracellular calcium concentration
  // Ca_MK_act
  //
  // calcium-calmodulin-dependent protein kinase
  // Ca_NSR
  //
  // calcium concentration in the non-juctional sarcoplasmic reticulum
  // Ca_JSR
  //
  // calcium concentration in the juctional sarcoplasmic reticulum
  // Ca_r
  //
  // restricted space calcium concentration
  // q_rel
  //
  // sarcoplasmic reticulum calcium release flux
  // q_leak
  //
  // sarcoplasmic reticulum calcium leak flux
  // q_up
  //
  // sarcoplasmic reticulum calcium uptake flux
  // q_tr
  //
  // sarcoplasmic reticulum calcium transfer flux
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar2 as
    unit millimolar {expo: 2};
  enddef;
  def unit millimolar3 as
    unit millimolar {expo: 3};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit millisecond_millimolar as
    unit millisecond;
    unit millimolar;
  enddef;
  def unit millisecond_per_millivolt2 as
    unit millisecond;
    unit millivolt {expo: -2};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit microA_per_microF_2 as
    unit microA_per_microF {expo: 2};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit microlitre as
    unit litre {pref: micro};
  enddef;
  def unit cm_per_siemens as
    unit metre {pref: centi};
    unit siemens {expo: -1};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit cm_per_second as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {init: -83.43812846286808, pub: out};
    var i_stim: microA_per_microF;
    var i_tot: microA_per_microF;
    var time: millisecond {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_Na_L: microA_per_microF {pub: in};
    var i_Ca_L: microA_per_microF {pub: in};
    var i_Ca_T: microA_per_microF {pub: in};
    var i_to_1: microA_per_microF {pub: in};
    var i_to_2: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var i_K_b: microA_per_microF {pub: in};
    var i_Cl_b: microA_per_microF {pub: in};
    var i_Ca_p: microA_per_microF {pub: in};
    var i_K_p: microA_per_microF {pub: in};
    var stim_start: millisecond {init: 0};
    var stim_end: millisecond {init: 1};
    var stim_amplitude: microA_per_microF {init: -80};
    i_stim = sel
      case (time >= stim_start) and (time <= stim_end):
        stim_amplitude;
      otherwise:
        0{microA_per_microF};
    endsel;
    ode(V, time) = -(i_tot+i_stim);
    i_tot = i_Na+i_Na_L+i_Ca_L+i_Ca_T+i_to_1+i_to_2+i_Kr+i_Ks+i_K1+i_NaCa+i_NaK+i_Na_b+i_K_b+i_Ca_b+i_Cl_b+i_Ca_p+i_K_p;
  enddef;

  def comp equilibrium_potentials as
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    var E_Cl: millivolt {pub: out};
    var E_Ks: millivolt {pub: out};
    var r_NaK: dimensionless {init: 0.01833};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    var Cl_i: millimolar {pub: in};
    var Cl_o: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ca = R*T/(2{dimensionless}*F)*ln(Ca_o/Ca_i);
    E_Cl = -R*T/F*ln(Cl_o/Cl_i);
    E_Ks = R*T/F*ln((K_o+r_NaK*Na_o)/(K_i+r_NaK*Na_i));
  enddef;

  def comp i_Na as
    var i_Na: microA_per_microF {pub: out};
    var g_Na: milliS_per_microF {init: 8};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var E_Na: millivolt {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*(0.8{dimensionless}*h+0.2{dimensionless}*j)*(V-E_Na);
  enddef;

  def comp i_Na_m_gate as
    var m: dimensionless {init: 0.002003390432234504, pub: out};
    var tau_m: millisecond;
    var m_infinity: dimensionless;
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = 0.32{per_millivolt_millisecond}*(V+47.13{millivolt})/(1{dimensionless}-exp(-0.1{per_millivolt}*(V+47.13{millivolt})));
    beta_m = 0.08{per_millisecond}*exp(-V/11{millivolt});
    m_infinity = alpha_m/(alpha_m+beta_m);
    tau_m = 1{dimensionless}/(alpha_m+beta_m);
    ode(m, time) = (m_infinity-m)/tau_m;
  enddef;

  def comp i_Na_h_gate as
    var h: dimensionless {init: 0.9786390933308567, pub: out};
    var tau_h: millisecond;
    var h_infinity: dimensionless;
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = sel
      case V < -40{millivolt}:
        0.135{per_millisecond}*exp((V+80{millivolt})/(-6.8{millivolt}));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40{millivolt}:
        3.56{per_millisecond}*exp(0.079{per_millivolt}*V)+310000{per_millisecond}*exp(0.35{per_millivolt}*V);
      otherwise:
        1{dimensionless}/(0.13{millisecond}*(1{dimensionless}+exp((V+10.66{millivolt})/(-11.1{millivolt}))));
    endsel;
    h_infinity = alpha_h/(alpha_h+beta_h);
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_infinity-h)/tau_h;
  enddef;

  def comp i_Na_j_gate as
    var j: dimensionless {init: 0.09866447258167589, pub: out};
    var tau_j: millisecond;
    var j_infinity: dimensionless;
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_j = sel
      case V < -40{millivolt}:
        (-127140{per_millivolt_millisecond}*exp(0.2444{per_millivolt}*V)-0.00003474{per_millivolt_millisecond}*exp(-0.04391{per_millivolt}*V))*(V+37.78{millivolt})/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt})));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40{millivolt}:
        0.1212{per_millisecond}*exp(-0.01052{per_millivolt}*V)/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt})));
      otherwise:
        0.3{per_millisecond}*exp(-0.0000002535{per_millivolt}*V)/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt})));
    endsel;
    j_infinity = 0.1{dimensionless}*alpha_j/(alpha_j+beta_j);
    tau_j = 0.1{dimensionless}/(alpha_j+beta_j);
    ode(j, time) = (j_infinity-j)/tau_j;
  enddef;

  def comp i_Na_L as
    var i_Na_L: microA_per_microF {pub: out};
    var g_Na_L: milliS_per_microF {init: 0.037375};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var E_Na: millivolt {pub: in};
    var m_L: dimensionless {priv: in};
    var h_L: dimensionless {priv: in};
    i_Na_L = g_Na_L*pow(m_L, 3{dimensionless})*h_L*(V-E_Na);
  enddef;

  def comp i_Na_L_m_L_gate as
    var m_L: dimensionless {init: 0.002003390432234504, pub: out};
    var tau_m_L: millisecond;
    var m_L_infinity: dimensionless;
    var alpha_m_L: per_millisecond;
    var beta_m_L: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m_L = 0.32{per_millivolt_millisecond}*(V+47.13{millivolt})/(1{dimensionless}-exp(-0.1{per_millivolt}*(V+47.13{millivolt})));
    beta_m_L = 0.08{per_millisecond}*exp(-V/11{millivolt});
    m_L_infinity = alpha_m_L/(alpha_m_L+beta_m_L);
    tau_m_L = 1{dimensionless}/(alpha_m_L+beta_m_L);
    ode(m_L, time) = (m_L_infinity-m_L)/tau_m_L;
  enddef;

  def comp i_Na_L_h_L_gate as
    var h_L: dimensionless {init: 0.8946968372659203, pub: out};
    var tau_h_L: millisecond;
    var h_L_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    h_L_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+69{millivolt})/6.1{millivolt}));
    tau_h_L = 175{millisecond}+125{millisecond}/(1{dimensionless}+exp(-(V+25{millivolt})/6{millivolt}));
    ode(h_L, time) = (h_L_infinity-h_L)/tau_h_L;
  enddef;

  def comp i_Ca_L as
    var i_Ca_L: microA_per_microF {priv: out, pub: out};
    var g_Ca_L: dimensionless {init: 0.3392328, pub: out};
    var i_Ca_L_max: microA_per_microF {pub: out};
    var p_Ca: cm_per_second {init: 0.000243};
    var z_Ca: dimensionless {pub: in};
    var gamma_Cai: dimensionless {pub: in};
    var gamma_Cao: dimensionless {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ca_r: millimolar {priv: out, pub: in};
    var Ca_MK_act: dimensionless {priv: out, pub: in};
    var km_Ca_MK: millimolar {priv: out, pub: in};
    var Ca_o: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    var f_Ca2: dimensionless {priv: in};
    var Cm: microF_per_cm2 {pub: in};
    i_Ca_L = g_Ca_L*d*f*f2*f_Ca*f_Ca2*i_Ca_L_max;
    i_Ca_L_max = 1{dimensionless}*p_Ca/Cm*sqr(z_Ca)*(V-15{millivolt})*sqr(F)/(R*T)*(gamma_Cai*Ca_r*exp(z_Ca*F*(V-15{millivolt})/(R*T))-gamma_Cao*Ca_o)/(exp(z_Ca*F*(V-15{millivolt})/(R*T))-1{dimensionless});
  enddef;

  def comp i_Ca_L_d_gate as
    var d: dimensionless {init: 0.000002322223865147363, pub: out};
    var d_infinity: dimensionless;
    var tau_d: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(d, time) = (d_infinity-d)/tau_d;
    d_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-4{millivolt})/6.74{millivolt}));
    tau_d = 0.59{millisecond}+0.8{millisecond}*exp(0.052{per_millivolt}*(V+13{millivolt}))/(1{dimensionless}+exp(0.132{per_millivolt}*(V+13{millivolt})));
  enddef;

  def comp i_Ca_L_f_gate as
    var f: dimensionless {init: 0.9985607329462358, pub: out};
    var f_infinity: dimensionless;
    var tau_f: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(f, time) = (f_infinity-f)/tau_f;
    f_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+18{millivolt})/10{millivolt}));
    tau_f = 4{millisecond}+0.005{millisecond_per_millivolt2}*sqr(V-2.5{millivolt});
  enddef;

  def comp i_Ca_L_f2_gate as
    var f2: dimensionless {init: 0.8173435436674658, pub: out};
    var f2_infinity: dimensionless;
    var tau_f2: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(f2, time) = (f2_infinity-f2)/tau_f2;
    f2_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+18{millivolt})/10{millivolt}));
    tau_f2 = 38{millisecond}+0.07{millisecond_per_millivolt2}*sqr(V-18.6{millivolt});
  enddef;

  def comp i_Ca_L_f_Ca_gate as
    var f_Ca: dimensionless {init: 0.9610551285529658, pub: out};
    var f_Ca_infinity: dimensionless;
    var tau_f_Ca: millisecond;
    var Ca_r: millimolar {pub: in};
    var i_Ca_L: microA_per_microF {pub: in};
    var Ca_MK_act: dimensionless {pub: in};
    var km_Ca_MK: millimolar {pub: in};
    var time: millisecond {pub: in};
    ode(f_Ca, time) = (f_Ca_infinity-f_Ca)/tau_f_Ca;
    f_Ca_infinity = 0.3{dimensionless}/(1{dimensionless}-i_Ca_L/0.05{microA_per_microF})+0.55{dimensionless}/(1{dimensionless}+Ca_r/0.003{millimolar})+0.15{dimensionless};
    tau_f_Ca = 0.5{millisecond}+10{millisecond}*1{millimolar}*Ca_MK_act/(1{millimolar}*Ca_MK_act+km_Ca_MK)+1{millisecond}/(1{dimensionless}+Ca_r/0.003{millimolar});
  enddef;

  def comp i_Ca_L_f_Ca2_gate as
    var f_Ca2: dimensionless {init: 0.868690796671854, pub: out};
    var f_Ca2_infinity: dimensionless;
    var tau_f_Ca2: millisecond;
    var i_Ca_L: microA_per_microF {pub: in};
    var time: millisecond {pub: in};
    ode(f_Ca2, time) = (f_Ca2_infinity-f_Ca2)/tau_f_Ca2;
    f_Ca2_infinity = 1{dimensionless}/(1{dimensionless}-i_Ca_L/0.01{microA_per_microF});
    tau_f_Ca2 = 125{millisecond}+300{millisecond}/(1{dimensionless}+exp((-i_Ca_L-0.175{microA_per_microF})/0.04{microA_per_microF}));
  enddef;

  def comp i_Ca_T as
    var i_Ca_T: microA_per_microF {pub: out};
    var g_Ca_T: milliS_per_microF {init: 0.13};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var b: dimensionless {priv: in};
    var g: dimensionless {priv: in};
    i_Ca_T = g_Ca_T*b*g*(V-50{millivolt});
  enddef;

  def comp i_Ca_T_b_gate as
    var b: dimensionless {init: 0.0002563937630984438, pub: out};
    var tau_b: millisecond;
    var b_infinity: dimensionless;
    var alpha_b: per_millisecond;
    var beta_b: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_b = 1.068{per_millisecond}*exp((V+16.3{millivolt})/30{millivolt});
    beta_b = 1.068{per_millisecond}*exp(-(V+16.3{millivolt})/30{millivolt});
    b_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+33{millivolt})/6.1{millivolt}));
    tau_b = 1{dimensionless}/(alpha_b+beta_b);
    ode(b, time) = (b_infinity-b)/tau_b;
  enddef;

  def comp i_Ca_T_g_gate as
    var g: dimensionless {init: 0.9720432601848331, pub: out};
    var tau_g: millisecond;
    var g_infinity: dimensionless;
    var alpha_g: per_millisecond;
    var beta_g: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_g = 0.015{per_millisecond}*exp(-(V+71.7{millivolt})/83.3{millivolt});
    beta_g = 0.015{per_millisecond}*exp((V+71.7{millivolt})/15.4{millivolt});
    g_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+60{millivolt})/6.6{millivolt}));
    tau_g = 1{dimensionless}/(alpha_g+beta_g);
    ode(g, time) = (g_infinity-g)/tau_g;
  enddef;

  def comp i_to_1 as
    var i_to_1: microA_per_microF {pub: out};
    var g_to_1: milliS_per_microF {init: 0.14135944};
    var E_K: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var a: dimensionless {priv: in};
    var i: dimensionless {priv: in};
    var i2: dimensionless {priv: in};
    i_to_1 = g_to_1*a*(0.8{dimensionless}*i+0.2{dimensionless}*i2)*(V-E_K);
  enddef;

  def comp i_to_1_a_gate as
    var a: dimensionless {init: 0.0004238729429342389, pub: out};
    var alpha_a: per_millisecond;
    var beta_a: per_millisecond;
    var tau_a: millisecond;
    var a_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(a, time) = (a_infinity-a)/tau_a;
    alpha_a = 25{per_millisecond}*exp((V-76{millivolt})/20{millivolt})/(1{dimensionless}+exp((V-76{millivolt})/20{millivolt}));
    beta_a = 25{per_millisecond}*exp(-(V+54{millivolt})/20{millivolt})/(1{dimensionless}+exp(-(V+54{millivolt})/20{millivolt}));
    tau_a = 1{dimensionless}/(alpha_a+beta_a);
    a_infinity = alpha_a/(alpha_a+beta_a);
  enddef;

  def comp i_to_1_i_gate as
    var i: dimensionless {init: 0.9990935802459496, pub: out};
    var alpha_i: per_millisecond;
    var beta_i: per_millisecond;
    var tau_i: millisecond;
    var i_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(i, time) = (i_infinity-i)/tau_i;
    alpha_i = 0.03{per_millisecond}/(1{dimensionless}+exp((V+25{millivolt})/15{millivolt}));
    beta_i = 0.1{per_millisecond}*exp((V-40{millivolt})/15{millivolt})/(1{dimensionless}+exp((V-40{millivolt})/15{millivolt}));
    tau_i = 6{millisecond}+5{millisecond}/(1{dimensionless}+exp((V-16.5{millivolt})/10{millivolt}));
    i_infinity = alpha_i/(alpha_i+beta_i);
  enddef;

  def comp i_to_1_i2_gate as
    var i2: dimensionless {init: 0.9777368439681764, pub: out};
    var alpha_i2: per_millisecond;
    var beta_i2: per_millisecond;
    var tau_i2: millisecond;
    var i2_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(i2, time) = (i2_infinity-i2)/tau_i2;
    alpha_i2 = 0.00442{per_millisecond}/(1{dimensionless}+exp((V+26{millivolt})/15{millivolt}));
    beta_i2 = 0.05{per_millisecond}*exp((V-10{millivolt})/15{millivolt})/(1{dimensionless}+exp((V-10{millivolt})/15{millivolt}));
    tau_i2 = 21.5{millisecond}+30{millisecond}/(1{dimensionless}+exp((V-25{millivolt})/10{millivolt}));
    i2_infinity = alpha_i2/(alpha_i2+beta_i2);
  enddef;

  def comp i_Kr as
    var i_Kr: microA_per_microF {pub: out};
    var g_Kr: milliS_per_microF;
    var rr_infinity: dimensionless;
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var E_K: millivolt {pub: in};
    var K_o: millimolar {pub: in};
    var xr: dimensionless {priv: in};
    i_Kr = g_Kr*xr*rr_infinity*(V-E_K);
    g_Kr = 0.040008488{milliS_per_microF}*sqrt(K_o/5.4{millimolar});
    rr_infinity = 1{dimensionless}/(1{dimensionless}+exp((V-5.4{millivolt})/20.4{millivolt}));
  enddef;

  def comp i_Kr_xr_gate as
    var xr: dimensionless {init: 0.07084939408222911, pub: out};
    var tau_xr: millisecond;
    var xr_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(xr, time) = (xr_infinity-xr)/tau_xr;
    tau_xr = 900{millisecond}/(1{dimensionless}+exp(V/5{millivolt}))+100{millisecond};
    xr_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+0.085{millivolt})/12.25{millivolt}));
  enddef;

  def comp i_Ks as
    var i_Ks: microA_per_microF {pub: out};
    var g_Ks: milliS_per_microF;
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var E_Ks: millivolt {pub: in};
    var Ca_i: millimolar {pub: in};
    var xs1: dimensionless {priv: in};
    var xs2: dimensionless {priv: in};
    i_Ks = g_Ks*xs1*xs2*(V-E_Ks);
    g_Ks = 0.052581329{milliS_per_microF}*(1{dimensionless}+0.6{dimensionless}/(1{dimensionless}+pow(0.000038{millimolar}/Ca_i, 1.4{dimensionless})));
  enddef;

  def comp i_Ks_xs1_gate as
    var xs1: dimensionless {init: 0.0011737654433043125, pub: out};
    var tau_xs1: millisecond;
    var xs1_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(xs1, time) = (xs1_infinity-xs1)/tau_xs1;
    tau_xs1 = 1{millisecond}/(0.0000761{per_millivolt}*(V+44.6{millivolt})/(1{dimensionless}-exp(-9.97{per_millivolt}*(V+44.6{millivolt})))+0.00036{per_millivolt}*(V-0.55{millivolt})/(exp(0.128{per_millivolt}*(V-0.55{millivolt}))-1{dimensionless}));
    xs1_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-9{millivolt})/13.7{millivolt}));
  enddef;

  def comp i_Ks_xs2_gate as
    var xs2: dimensionless {init: 0.001179442867470093, pub: out};
    var tau_xs2: millisecond;
    var xs2_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(xs2, time) = (xs2_infinity-xs2)/tau_xs2;
    tau_xs2 = 2{dimensionless}*1{millisecond}/(0.0000761{per_millivolt}*(V+44.6{millivolt})/(1{dimensionless}-exp(-9.97{per_millivolt}*(V+44.6{millivolt})))+0.00036{per_millivolt}*(V-0.55{millivolt})/(exp(0.128{per_millivolt}*(V-0.55{millivolt}))-1{dimensionless}));
    xs2_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-9{millivolt})/13.7{millivolt}));
  enddef;

  def comp i_K1 as
    var i_K1: microA_per_microF {pub: out};
    var g_K1: milliS_per_microF;
    var time: millisecond {pub: in};
    var V: millivolt {priv: out, pub: in};
    var E_K: millivolt {priv: out, pub: in};
    var K_o: millimolar {pub: in};
    var xK1: dimensionless {priv: in};
    i_K1 = (g_K1*xK1+0.004{milliS_per_microF})*(V-E_K);
    g_K1 = 0.25{milliS_per_microF}*sqrt(K_o/5.4{millimolar});
  enddef;

  def comp i_K1_xK1_gate as
    var xK1: dimensionless {pub: out};
    var alpha_xK1: dimensionless;
    var beta_xK1: dimensionless;
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    xK1 = alpha_xK1/(alpha_xK1+beta_xK1);
    beta_xK1 = (0.49124{dimensionless}*exp(0.08032{per_millivolt}*(V+5.476{millivolt}-E_K))+exp(0.06175{per_millivolt}*(V-(594.31{millivolt}+E_K))))/(1{dimensionless}+exp(-0.5143{per_millivolt}*(V+4.753{millivolt}-E_K)));
    alpha_xK1 = 1.02{dimensionless}/(1{dimensionless}+exp(0.2385{per_millivolt}*(V-(E_K+59.215{millivolt}))));
  enddef;

  def comp i_K_p as
    var i_K_p: microA_per_microF {pub: out};
    var g_K_p: milliS_per_microF {init: 0.00276};
    var kp: dimensionless;
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_K_p = g_K_p*kp*(V-E_K);
    kp = 1{dimensionless}/(1{dimensionless}+exp((7.488{millivolt}-V)/5.98{millivolt}));
  enddef;

  def comp i_to_2 as
    var i_to_2: microA_per_microF {priv: out, pub: out};
    var p_Cl: cm_per_second {init: 0.0000004};
    var z_Cl: dimensionless {init: -1};
    var i_to_2_max: microA_per_microF;
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {pub: in};
    var Ca_r: millimolar {priv: out, pub: in};
    var Cl_i: millimolar {pub: in};
    var Cl_o: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var a: dimensionless {priv: in};
    var Cm: microF_per_cm2 {pub: in};
    i_to_2 = 20{dimensionless}*i_to_2_max*a;
    i_to_2_max = 1{dimensionless}*p_Cl/Cm*sqr(z_Cl)*V*sqr(F)/(R*T)*(Cl_i-Cl_o*exp(-z_Cl*V*F/(R*T)))/(1{dimensionless}-exp(-z_Cl*V*F/(R*T)));
  enddef;

  def comp i_to_2_a_gate as
    var a: dimensionless {init: 0.0014909437525000811, pub: out};
    var a_infinity: dimensionless;
    var tau_a: millisecond;
    var km_to_2: millimolar {init: 0.1502};
    var Ca_r: millimolar {pub: in};
    var time: millisecond {pub: in};
    ode(a, time) = (a_infinity-a)/tau_a;
    a_infinity = 1{dimensionless}/(1{dimensionless}+km_to_2/Ca_r);
    tau_a = 1{millisecond};
  enddef;

  def comp i_NaCa as
    var i_NaCa: microA_per_microF {pub: out};
    var X_NaCa: dimensionless {init: 0.4};
    var i_NaCa_max: microA_per_microF {init: 4.5};
    var km_Na_i_1: millimolar {init: 12.3};
    var km_Na_o: millimolar {init: 87.5};
    var km_Ca_i: millimolar {init: 0.0036};
    var km_Ca_o: millimolar {init: 1.3};
    var km_Ca_act: millimolar {init: 0.000125};
    var k_sat: dimensionless {init: 0.27};
    var dNaCa_1: millimolar4;
    var dNaCa_2: millimolar4;
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    i_NaCa = (X_NaCa*i_NaCa_max*pow(Na_i, 3{dimensionless})*Ca_o*exp(0.35{dimensionless}*F*V/(R*T))-1.5{microA_per_microF}*pow(Na_o, 3{dimensionless})*Ca_i*exp(-0.65{dimensionless}*F*V/(R*T)))/((1{dimensionless}+sqr(km_Ca_act/(1.5{dimensionless}*Ca_i)))*(1{dimensionless}+k_sat*exp(-0.65{dimensionless}*V*F/(R*T)))*(dNaCa_1+dNaCa_2));
    dNaCa_1 = km_Ca_o*pow(Na_i, 3{dimensionless})+1.5{dimensionless}*pow(km_Na_o, 3{dimensionless})*Ca_i+pow(km_Na_i_1, 3{dimensionless})*Ca_o*(1{dimensionless}+1.5{dimensionless}*Ca_i/km_Ca_i);
    dNaCa_2 = km_Ca_i*pow(Na_o, 3{dimensionless})*(1{dimensionless}+Na_i/km_Na_i_1)+pow(Na_i, 3{dimensionless})*Ca_o+1.5{dimensionless}*pow(Na_o, 3{dimensionless})*Ca_i;
  enddef;

  def comp i_NaK as
    var i_NaK: microA_per_microF {pub: out};
    var g_NaK: microA_per_microF {init: 0.61875};
    var km_Na_i_2: millimolar {init: 10};
    var km_K_o: millimolar {init: 1.5};
    var f_NaK: dimensionless;
    var sigma: dimensionless;
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    i_NaK = g_NaK*f_NaK*1{dimensionless}/(1{dimensionless}+sqr(km_Na_i_2/Na_i))*K_o/(K_o+km_K_o);
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*F*V/(R*T))+0.0365{dimensionless}*sigma*exp(-F*V/(R*T)));
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Na_o/67.3{millimolar})-1{dimensionless});
  enddef;

  def comp i_Ca_p as
    var i_Ca_p: microA_per_microF {pub: out};
    var i_Ca_p_max: microA_per_microF {init: 0.0575};
    var km_Ca_p: millimolar {init: 0.0005};
    var Ca_i: millimolar {pub: in};
    i_Ca_p = i_Ca_p_max*Ca_i/(km_Ca_p+Ca_i);
  enddef;

  def comp CT_K_Cl as
    var CT_K_Cl: millimolar_per_millisecond {pub: out};
    var CT_K_Cl_max: millimolar_per_millisecond {init: 7.0756e-6};
    var E_K: millivolt {pub: in};
    var E_Cl: millivolt {pub: in};
    CT_K_Cl = CT_K_Cl_max*(E_K-E_Cl)/(E_K+87.8251{millivolt}-E_Cl);
  enddef;

  def comp CT_Na_Cl as
    var CT_Na_Cl: millimolar_per_millisecond {pub: out};
    var CT_Na_Cl_max: millimolar_per_millisecond {init: 9.8443e-6};
    var E_Na: millivolt {pub: in};
    var E_Cl: millivolt {pub: in};
    CT_Na_Cl = CT_Na_Cl_max*pow(E_Na-E_Cl, 4{dimensionless})/(pow(E_Na-E_Cl, 4{dimensionless})+pow(87.8251{millivolt}, 4{dimensionless}));
  enddef;

  def comp background_currents as
    var i_Na_b: microA_per_microF {pub: out};
    var i_Ca_b: microA_per_microF {pub: out};
    var i_K_b: microA_per_microF {pub: out};
    var i_Cl_b: microA_per_microF {pub: out};
    var g_Na_b: milliS_per_microF {init: 0.0025};
    var g_K_b: milliS_per_microF {init: 0.005};
    var p_Ca_b: cm_per_second {init: 1.995084e-7};
    var g_Cl_b: milliS_per_microF {init: 0.000225};
    var z_Ca: dimensionless {pub: in};
    var gamma_Cai: dimensionless {pub: in};
    var gamma_Cao: dimensionless {pub: in};
    var E_K: millivolt {pub: in};
    var E_Cl: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    var V: millivolt {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    i_Na_b = g_Na_b*(V-E_Na);
    i_K_b = g_K_b*(V-E_K);
    i_Cl_b = g_Cl_b*(V-E_Cl);
    i_Ca_b = 1{dimensionless}*p_Ca_b/Cm*sqr(z_Ca)*V*sqr(F)/(R*T)*(gamma_Cai*Ca_i*exp(z_Ca*V*F/(R*T))-gamma_Cao*Ca_o)/(exp(z_Ca*V*F/(R*T))-1{dimensionless});
  enddef;

  def comp intracellular_ion_concentrations as
    var Na_i: millimolar {init: 9.927155552932733, pub: out};
    var Cl_i: millimolar {init: 18.904682470140408, pub: out};
    var K_i: millimolar {init: 141.9670801746057, pub: out};
    var Vol_myo: microlitre {pub: in};
    var a_cap: cm2 {pub: in};
    var time: millisecond {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_Na_L: microA_per_microF {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_to_1: microA_per_microF {pub: in};
    var i_to_2: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_K_p: microA_per_microF {pub: in};
    var i_K_b: microA_per_microF {pub: in};
    var i_Cl_b: microA_per_microF {pub: in};
    var CT_Na_Cl: millimolar_per_millisecond {pub: in};
    var CT_K_Cl: millimolar_per_millisecond {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    ode(Na_i, time) = -Cm*(i_Na+i_Na_L+i_Na_b+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)*a_cap/(Vol_myo*F)+CT_Na_Cl;
    ode(K_i, time) = -Cm*(i_to_1+i_K1+i_Kr+i_Ks+i_K_p+i_K_b-2{dimensionless}*i_NaK)*a_cap/(Vol_myo*F)+CT_K_Cl;
    ode(Cl_i, time) = -Cm*(i_to_2+i_Cl_b)*a_cap/(Vol_myo*F)+CT_Na_Cl+CT_K_Cl;
  enddef;

  def comp Ca_i as
    var Ca_i: millimolar {init: 0.00022355433459434943, pub: out};
    var km_TRPN: millimolar {init: 0.0005};
    var km_CMDN: millimolar {init: 0.00238};
    var TRPN_max: millimolar {init: 0.07};
    var CMDN_max: millimolar {init: 0.05};
    var TRPN: dimensionless;
    var CMDN: dimensionless;
    var b_myo: dimensionless;
    var Vol_myo: microlitre {pub: in};
    var Vol_nsr: microlitre {pub: in};
    var Vol_ss: microlitre {pub: in};
    var a_cap: cm2 {pub: in};
    var time: millisecond {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var i_Ca_p: microA_per_microF {pub: in};
    var q_up: millimolar_per_millisecond {pub: in};
    var q_leak: millimolar_per_millisecond {pub: in};
    var q_diff: millimolar_per_millisecond {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    ode(Ca_i, time) = -b_myo*(Cm*(i_Ca_b+i_Ca_p-2{dimensionless}*i_NaCa)*a_cap/(2{dimensionless}*Vol_myo*F)+(q_up-q_leak)*Vol_nsr/Vol_myo-q_diff*Vol_ss/Vol_myo);
    CMDN = 2{dimensionless}*CMDN_max*Ca_i/sqr(Ca_i+km_CMDN);
    TRPN = 2{dimensionless}*TRPN_max*Ca_i/sqr(Ca_i+km_TRPN);
    b_myo = 1{dimensionless}/(1{dimensionless}+TRPN+CMDN);
  enddef;

  def comp Ca_MK_act as
    var Ca_MK_act: dimensionless {pub: out};
    var km_Ca_MK: millimolar {init: 0.15, pub: out};
    var Ca_MK_trap: dimensionless {init: 0.000008789168284782809};
    var Ca_MK_bound: dimensionless;
    var alpha_Ca_MK: per_millisecond {init: 0.05};
    var beta_Ca_MK: per_millisecond {init: 0.00068};
    var Ca_MK_0: dimensionless {init: 0.05};
    var time: millisecond {pub: in};
    var Ca_r: millimolar {pub: in};
    Ca_MK_act = Ca_MK_bound+Ca_MK_trap;
    ode(Ca_MK_trap, time) = alpha_Ca_MK*Ca_MK_bound*(Ca_MK_bound+Ca_MK_trap)-beta_Ca_MK*Ca_MK_trap;
    Ca_MK_bound = Ca_MK_0*(1{dimensionless}-Ca_MK_trap)/(1{dimensionless}+km_Ca_MK/Ca_r);
  enddef;

  def comp Ca_NSR as
    var Ca_NSR: millimolar {init: 1.2132524695849454, pub: out};
    var Vol_jsr: microlitre {pub: in};
    var Vol_nsr: microlitre {pub: in};
    var q_up: millimolar_per_millisecond {pub: in};
    var q_leak: millimolar_per_millisecond {pub: in};
    var q_tr: millimolar_per_millisecond {pub: in};
    var time: millisecond {pub: in};
    ode(Ca_NSR, time) = q_up-(q_leak+q_tr*Vol_jsr/Vol_nsr);
  enddef;

  def comp Ca_JSR as
    var Ca_JSR: millimolar {init: 1.1433050636518596, pub: out};
    var CSQN_max: millimolar {init: 10};
    var km_CSQN: millimolar {init: 0.8};
    var Vol_jsr: microlitre {pub: in};
    var Vol_nsr: microlitre {pub: in};
    var q_tr: millimolar_per_millisecond {pub: in};
    var q_rel: millimolar_per_millisecond {pub: in};
    var time: millisecond {pub: in};
    ode(Ca_JSR, time) = (q_tr-q_rel)/(1{dimensionless}+CSQN_max*km_CSQN/sqr(km_CSQN+Ca_JSR));
  enddef;

  def comp Ca_r as
    var Ca_r: millimolar {init: 0.00022418117117903934, pub: out};
    var q_diff: millimolar_per_millisecond {pub: out};
    var km_b_SR: millimolar {init: 0.00087};
    var km_b_SL: millimolar {init: 0.0087};
    var b_SR_max: millimolar {init: 0.047};
    var b_SL_max: millimolar {init: 1.124};
    var tau_ss: millisecond {init: 0.2};
    var b_SR: dimensionless;
    var b_SL: dimensionless;
    var Ca_r_tot: dimensionless;
    var Vol_jsr: microlitre {pub: in};
    var Vol_ss: microlitre {pub: in};
    var a_cap: cm2 {pub: in};
    var z_Ca: dimensionless {pub: in};
    var time: millisecond {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Ca_L: microA_per_microF {pub: in};
    var q_rel: millimolar_per_millisecond {pub: in};
    var Ca_i: millimolar {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    ode(Ca_r, time) = Ca_r_tot*(-Cm*i_Ca_L*a_cap/(Vol_ss*z_Ca*F)+q_rel*Vol_jsr/Vol_ss-q_diff);
    q_diff = (Ca_r-Ca_i)/tau_ss;
    b_SL = 2{dimensionless}*b_SL_max*Ca_r/sqr(Ca_r+km_b_SL);
    b_SR = 2{dimensionless}*b_SR_max*Ca_r/sqr(Ca_r+km_b_SR);
    Ca_r_tot = 1{dimensionless}/(1{dimensionless}+b_SR+b_SL);
  enddef;

  def comp q_rel as
    var q_rel: millimolar_per_millisecond {pub: out};
    var g_rel: per_millisecond;
    var vg: dimensionless;
    var time: millisecond {priv: out, pub: in};
    var Ca_MK_act: dimensionless {priv: out, pub: in};
    var km_Ca_MK: millimolar {priv: out, pub: in};
    var Ca_r: millimolar {priv: out, pub: in};
    var Ca_JSR: millimolar {priv: out, pub: in};
    var i_Ca_L: microA_per_microF {priv: out, pub: in};
    var i_Ca_L_max: microA_per_microF {pub: in};
    var g_Ca_L: dimensionless {pub: in};
    var ri: dimensionless {priv: in};
    var ro: dimensionless {priv: in};
    q_rel = g_rel*ro*ri*(Ca_JSR-Ca_r);
    g_rel = 3000{per_millisecond}*vg;
    vg = 1{dimensionless}/(1{dimensionless}+exp((g_Ca_L*i_Ca_L_max+13{microA_per_microF})/5{microA_per_microF}));
  enddef;

  def comp q_rel_ri_gate as
    var ri: dimensionless {init: 0.7802870066567904, pub: out};
    var tau_ri: millisecond;
    var tau_Ca_MK: millisecond;
    var tau_Ca_MK_max: millisecond {init: 10};
    var Ca_fac: millimolar;
    var ri_infinity: dimensionless;
    var Ca_r: millimolar {pub: in};
    var Ca_MK_act: dimensionless {pub: in};
    var km_Ca_MK: millimolar {pub: in};
    var i_Ca_L: microA_per_microF {pub: in};
    var time: millisecond {pub: in};
    ode(ri, time) = (ri_infinity-ri)/tau_ri;
    tau_ri = (350{millisecond}-tau_Ca_MK)/(1{dimensionless}+exp((Ca_r-0.003{millimolar}+0.003{dimensionless}*Ca_fac)/0.0002{millimolar}))+3{millisecond}+tau_Ca_MK;
    ri_infinity = 1{dimensionless}/(1{dimensionless}+exp((Ca_r-0.0004{millimolar}+0.002{dimensionless}*Ca_fac)/0.000025{millimolar}));
    Ca_fac = 1{millimolar}/(1{dimensionless}+exp((i_Ca_L+0.05{microA_per_microF})/0.015{microA_per_microF}));
    tau_Ca_MK = tau_Ca_MK_max*1{millimolar}*Ca_MK_act/(km_Ca_MK+1{millimolar}*Ca_MK_act);
  enddef;

  def comp q_rel_ro_gate as
    var ro: dimensionless {init: 1.2785734760674763e-9, pub: out};
    var tau_ro: millisecond {init: 3};
    var ro_infinity: dimensionless;
    var ro_infinity_JSR: dimensionless;
    var Ca_r: millimolar {pub: in};
    var Ca_JSR: millimolar {pub: in};
    var i_Ca_L: microA_per_microF {pub: in};
    var time: millisecond {pub: in};
    ode(ro, time) = (ro_infinity-ro)/tau_ro;
    ro_infinity = ro_infinity_JSR*sqr(i_Ca_L)/(sqr(i_Ca_L)+1{microA_per_microF_2});
    ro_infinity_JSR = pow(Ca_JSR, 1.9{dimensionless})/(pow(Ca_JSR, 1.9{dimensionless})+pow(49.28{millimolar}*Ca_r/(Ca_r+0.0028{millimolar}), 1.9{dimensionless}));
  enddef;

  def comp q_leak as
    var q_leak: millimolar_per_millisecond {pub: out};
    var q_leak_max: millimolar_per_millisecond {init: 0.004375};
    var NSR_max: millimolar {init: 15};
    var Ca_NSR: millimolar {pub: in};
    q_leak = q_leak_max*Ca_NSR/NSR_max;
  enddef;

  def comp q_up as
    var q_up: millimolar_per_millisecond {pub: out};
    var X_q_up: dimensionless {init: 0.5};
    var q_up_max: millimolar_per_millisecond {init: 0.004375};
    var dq_up_Ca_MK: dimensionless;
    var dq_up_Ca_MK_max: dimensionless {init: 0.75};
    var dkm_plb: millimolar;
    var dkm_plb_max: millimolar {init: 0.00017};
    var km_up: millimolar {init: 0.00092};
    var Ca_MK_act: dimensionless {pub: in};
    var km_Ca_MK: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    q_up = X_q_up*(dq_up_Ca_MK+1{dimensionless})*q_up_max*Ca_i/(Ca_i+km_up-dkm_plb);
    dq_up_Ca_MK = dq_up_Ca_MK_max*Ca_MK_act*1{millimolar}/(km_Ca_MK+Ca_MK_act*1{millimolar});
    dkm_plb = dkm_plb_max*Ca_MK_act*1{millimolar}/(km_Ca_MK+Ca_MK_act*1{millimolar});
  enddef;

  def comp q_tr as
    var q_tr: millimolar_per_millisecond {pub: out};
    var tau_tr: millisecond {init: 120};
    var Ca_NSR: millimolar {pub: in};
    var Ca_JSR: millimolar {pub: in};
    q_tr = (Ca_NSR-Ca_JSR)/tau_tr;
  enddef;

  def comp model_parameters as
    var Na_o: millimolar {init: 140, pub: out};
    var Ca_o: millimolar {init: 1.8, pub: out};
    var K_o: millimolar {init: 5.4, pub: out};
    var Cl_o: millimolar {init: 100, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485, pub: out};
    var z_Ca: dimensionless {init: 2, pub: out};
    var gamma_Cai: dimensionless {init: 1, pub: out};
    var gamma_Cao: dimensionless {init: 0.341, pub: out};
    var Vol_myo: microlitre {pub: out};
    var Vol_jsr: microlitre {pub: out};
    var Vol_nsr: microlitre {pub: out};
    var Vol_ss: microlitre {pub: out};
    var a_cap: cm2 {pub: out};
    var Vol_cell: microlitre {init: 0.3454, pub: out};
    var a_geo: cm2;
    var radius: cm {init: 0.0011};
    var length: cm {init: 0.01};
    var rcg: dimensionless {init: 2};
    var Cm: microF_per_cm2 {init: 1, pub: out};
    a_geo = 2{dimensionless}*3.14{dimensionless}*sqr(radius)+2{dimensionless}*3.14{dimensionless}*radius*length;
    a_cap = rcg*a_geo;
    Vol_myo = Vol_cell*0.68{dimensionless};
    Vol_nsr = Vol_cell*0.0552{dimensionless};
    Vol_jsr = Vol_cell*0.0048{dimensionless};
    Vol_ss = Vol_cell*0.02{dimensionless};
  enddef;

  def group as encapsulation for
    comp i_Na incl
      comp i_Na_m_gate;
      comp i_Na_h_gate;
      comp i_Na_j_gate;
    endcomp;
    comp i_Na_L incl
      comp i_Na_L_m_L_gate;
      comp i_Na_L_h_L_gate;
    endcomp;
    comp i_Ca_L incl
      comp i_Ca_L_d_gate;
      comp i_Ca_L_f_gate;
      comp i_Ca_L_f2_gate;
      comp i_Ca_L_f_Ca_gate;
      comp i_Ca_L_f_Ca2_gate;
    endcomp;
    comp i_Ca_T incl
      comp i_Ca_T_b_gate;
      comp i_Ca_T_g_gate;
    endcomp;
    comp i_to_1 incl
      comp i_to_1_a_gate;
      comp i_to_1_i_gate;
      comp i_to_1_i2_gate;
    endcomp;
    comp i_Kr incl
      comp i_Kr_xr_gate;
    endcomp;
    comp i_Ks incl
      comp i_Ks_xs1_gate;
      comp i_Ks_xs2_gate;
    endcomp;
    comp i_K1 incl
      comp i_K1_xK1_gate;
    endcomp;
    comp i_to_2 incl
      comp i_to_2_a_gate;
    endcomp;
    comp q_rel incl
      comp q_rel_ri_gate;
      comp q_rel_ro_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between i_Na and environment for
    vars time and time;
  enddef;
  def map between i_Na_L and environment for
    vars time and time;
  enddef;
  def map between i_Ca_L and environment for
    vars time and time;
  enddef;
  def map between i_Ca_T and environment for
    vars time and time;
  enddef;
  def map between i_to_1 and environment for
    vars time and time;
  enddef;
  def map between i_Kr and environment for
    vars time and time;
  enddef;
  def map between i_Ks and environment for
    vars time and time;
  enddef;
  def map between i_K1 and environment for
    vars time and time;
  enddef;
  def map between i_K_p and environment for
    vars time and time;
  enddef;
  def map between i_to_2 and environment for
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between Ca_i and environment for
    vars time and time;
  enddef;
  def map between Ca_MK_act and environment for
    vars time and time;
  enddef;
  def map between Ca_NSR and environment for
    vars time and time;
  enddef;
  def map between Ca_JSR and environment for
    vars time and time;
  enddef;
  def map between Ca_r and environment for
    vars time and time;
  enddef;
  def map between q_rel and environment for
    vars time and time;
  enddef;
  def map between membrane and i_Na for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and i_Na_L for
    vars V and V;
    vars i_Na_L and i_Na_L;
  enddef;
  def map between membrane and i_Ca_L for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between membrane and i_Ca_T for
    vars V and V;
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between membrane and i_to_1 for
    vars V and V;
    vars i_to_1 and i_to_1;
  enddef;
  def map between membrane and i_Kr for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and i_Ks for
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and i_K1 for
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between membrane and i_K_p for
    vars V and V;
    vars i_K_p and i_K_p;
  enddef;
  def map between membrane and i_to_2 for
    vars V and V;
    vars i_to_2 and i_to_2;
  enddef;
  def map between membrane and i_NaCa for
    vars V and V;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between membrane and i_NaK for
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and i_Ca_p for
    vars i_Ca_p and i_Ca_p;
  enddef;
  def map between membrane and background_currents for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars i_Na_b and i_Na_b;
    vars i_Cl_b and i_Cl_b;
    vars i_K_b and i_K_b;
  enddef;
  def map between intracellular_ion_concentrations and equilibrium_potentials for
    vars Na_i and Na_i;
    vars K_i and K_i;
    vars Cl_i and Cl_i;
  enddef;
  def map between Ca_i and equilibrium_potentials for
    vars Ca_i and Ca_i;
  enddef;
  def map between model_parameters and equilibrium_potentials for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_o and Na_o;
    vars Ca_o and Ca_o;
    vars K_o and K_o;
    vars Cl_o and Cl_o;
  enddef;
  def map between i_Na and equilibrium_potentials for
    vars E_Na and E_Na;
  enddef;
  def map between i_Na_L and equilibrium_potentials for
    vars E_Na and E_Na;
  enddef;
  def map between model_parameters and i_Ca_L for
    vars R and R;
    vars T and T;
    vars F and F;
    vars z_Ca and z_Ca;
    vars Ca_o and Ca_o;
    vars gamma_Cai and gamma_Cai;
    vars gamma_Cao and gamma_Cao;
    vars Cm and Cm;
  enddef;
  def map between Ca_r and i_Ca_L for
    vars Ca_r and Ca_r;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between Ca_MK_act and i_Ca_L for
    vars Ca_MK_act and Ca_MK_act;
    vars km_Ca_MK and km_Ca_MK;
  enddef;
  def map between i_to_1 and equilibrium_potentials for
    vars E_K and E_K;
  enddef;
  def map between i_Kr and equilibrium_potentials for
    vars E_K and E_K;
  enddef;
  def map between model_parameters and i_Kr for
    vars K_o and K_o;
  enddef;
  def map between i_Ks and equilibrium_potentials for
    vars E_Ks and E_Ks;
  enddef;
  def map between Ca_i and i_Ks for
    vars Ca_i and Ca_i;
  enddef;
  def map between i_K1 and equilibrium_potentials for
    vars E_K and E_K;
  enddef;
  def map between model_parameters and i_K1 for
    vars K_o and K_o;
  enddef;
  def map between i_K_p and equilibrium_potentials for
    vars E_K and E_K;
  enddef;
  def map between Ca_r and i_to_2 for
    vars Ca_r and Ca_r;
  enddef;
  def map between intracellular_ion_concentrations and i_to_2 for
    vars Cl_i and Cl_i;
    vars i_to_2 and i_to_2;
  enddef;
  def map between model_parameters and i_to_2 for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cl_o and Cl_o;
    vars Cm and Cm;
  enddef;
  def map between model_parameters and i_NaCa for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_o and Na_o;
    vars Ca_o and Ca_o;
  enddef;
  def map between intracellular_ion_concentrations and i_NaCa for
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Ca_i and i_NaCa for
    vars Ca_i and Ca_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between model_parameters and i_NaK for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_o and Na_o;
    vars K_o and K_o;
  enddef;
  def map between intracellular_ion_concentrations and i_NaK for
    vars Na_i and Na_i;
    vars i_NaK and i_NaK;
  enddef;
  def map between Ca_i and i_Ca_p for
    vars Ca_i and Ca_i;
    vars i_Ca_p and i_Ca_p;
  enddef;
  def map between CT_K_Cl and equilibrium_potentials for
    vars E_K and E_K;
    vars E_Cl and E_Cl;
  enddef;
  def map between CT_Na_Cl and equilibrium_potentials for
    vars E_Na and E_Na;
    vars E_Cl and E_Cl;
  enddef;
  def map between model_parameters and background_currents for
    vars R and R;
    vars T and T;
    vars F and F;
    vars z_Ca and z_Ca;
    vars Ca_o and Ca_o;
    vars gamma_Cai and gamma_Cai;
    vars gamma_Cao and gamma_Cao;
    vars Cm and Cm;
  enddef;
  def map between background_currents and equilibrium_potentials for
    vars E_Na and E_Na;
    vars E_Cl and E_Cl;
    vars E_K and E_K;
  enddef;
  def map between Ca_i and background_currents for
    vars Ca_i and Ca_i;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between i_Na and intracellular_ion_concentrations for
    vars i_Na and i_Na;
  enddef;
  def map between i_Na_L and intracellular_ion_concentrations for
    vars i_Na_L and i_Na_L;
  enddef;
  def map between i_K1 and intracellular_ion_concentrations for
    vars i_K1 and i_K1;
  enddef;
  def map between i_to_1 and intracellular_ion_concentrations for
    vars i_to_1 and i_to_1;
  enddef;
  def map between i_Kr and intracellular_ion_concentrations for
    vars i_Kr and i_Kr;
  enddef;
  def map between i_Ks and intracellular_ion_concentrations for
    vars i_Ks and i_Ks;
  enddef;
  def map between i_K_p and intracellular_ion_concentrations for
    vars i_K_p and i_K_p;
  enddef;
  def map between background_currents and intracellular_ion_concentrations for
    vars i_Na_b and i_Na_b;
    vars i_K_b and i_K_b;
    vars i_Cl_b and i_Cl_b;
  enddef;
  def map between CT_K_Cl and intracellular_ion_concentrations for
    vars CT_K_Cl and CT_K_Cl;
  enddef;
  def map between CT_Na_Cl and intracellular_ion_concentrations for
    vars CT_Na_Cl and CT_Na_Cl;
  enddef;
  def map between model_parameters and intracellular_ion_concentrations for
    vars Vol_myo and Vol_myo;
    vars a_cap and a_cap;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between model_parameters and Ca_i for
    vars Vol_myo and Vol_myo;
    vars Vol_nsr and Vol_nsr;
    vars Vol_ss and Vol_ss;
    vars a_cap and a_cap;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between q_up and Ca_i for
    vars q_up and q_up;
    vars Ca_i and Ca_i;
  enddef;
  def map between q_leak and Ca_i for
    vars q_leak and q_leak;
  enddef;
  def map between Ca_r and Ca_MK_act for
    vars Ca_r and Ca_r;
  enddef;
  def map between model_parameters and Ca_NSR for
    vars Vol_jsr and Vol_jsr;
    vars Vol_nsr and Vol_nsr;
  enddef;
  def map between q_leak and Ca_NSR for
    vars q_leak and q_leak;
    vars Ca_NSR and Ca_NSR;
  enddef;
  def map between q_up and Ca_NSR for
    vars q_up and q_up;
  enddef;
  def map between q_tr and Ca_NSR for
    vars q_tr and q_tr;
    vars Ca_NSR and Ca_NSR;
  enddef;
  def map between model_parameters and Ca_JSR for
    vars Vol_jsr and Vol_jsr;
    vars Vol_nsr and Vol_nsr;
  enddef;
  def map between q_tr and Ca_JSR for
    vars q_tr and q_tr;
    vars Ca_JSR and Ca_JSR;
  enddef;
  def map between q_rel and Ca_JSR for
    vars q_rel and q_rel;
    vars Ca_JSR and Ca_JSR;
  enddef;
  def map between model_parameters and Ca_r for
    vars Vol_jsr and Vol_jsr;
    vars Vol_ss and Vol_ss;
    vars a_cap and a_cap;
    vars F and F;
    vars Cm and Cm;
    vars z_Ca and z_Ca;
  enddef;
  def map between Ca_i and Ca_r for
    vars Ca_i and Ca_i;
    vars q_diff and q_diff;
  enddef;
  def map between q_rel and Ca_r for
    vars q_rel and q_rel;
    vars Ca_r and Ca_r;
  enddef;
  def map between q_rel and Ca_MK_act for
    vars Ca_MK_act and Ca_MK_act;
    vars km_Ca_MK and km_Ca_MK;
  enddef;
  def map between i_Ca_L and q_rel for
    vars i_Ca_L and i_Ca_L;
    vars g_Ca_L and g_Ca_L;
    vars i_Ca_L_max and i_Ca_L_max;
  enddef;
  def map between q_up and Ca_MK_act for
    vars Ca_MK_act and Ca_MK_act;
    vars km_Ca_MK and km_Ca_MK;
  enddef;
  def map between i_Na and i_Na_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Na and i_Na_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Na and i_Na_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Na_L and i_Na_L_m_L_gate for
    vars m_L and m_L;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Na_L and i_Na_L_h_L_gate for
    vars h_L and h_L;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Ca_L and i_Ca_L_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Ca_L and i_Ca_L_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Ca_L and i_Ca_L_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars time and time;
    vars i_Ca_L and i_Ca_L;
    vars Ca_r and Ca_r;
    vars Ca_MK_act and Ca_MK_act;
    vars km_Ca_MK and km_Ca_MK;
  enddef;
  def map between i_Ca_L and i_Ca_L_f2_gate for
    vars f2 and f2;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Ca_L and i_Ca_L_f_Ca2_gate for
    vars f_Ca2 and f_Ca2;
    vars time and time;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between i_Ca_T and i_Ca_T_b_gate for
    vars b and b;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Ca_T and i_Ca_T_g_gate for
    vars g and g;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_to_1 and i_to_1_a_gate for
    vars a and a;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_to_1 and i_to_1_i_gate for
    vars i and i;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_to_1 and i_to_1_i2_gate for
    vars i2 and i2;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Kr and i_Kr_xr_gate for
    vars xr and xr;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Ks and i_Ks_xs1_gate for
    vars xs1 and xs1;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Ks and i_Ks_xs2_gate for
    vars xs2 and xs2;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_K1 and i_K1_xK1_gate for
    vars xK1 and xK1;
    vars E_K and E_K;
    vars V and V;
  enddef;
  def map between i_to_2 and i_to_2_a_gate for
    vars a and a;
    vars time and time;
    vars Ca_r and Ca_r;
  enddef;
  def map between q_rel and q_rel_ri_gate for
    vars ri and ri;
    vars time and time;
    vars i_Ca_L and i_Ca_L;
    vars Ca_r and Ca_r;
    vars Ca_MK_act and Ca_MK_act;
    vars km_Ca_MK and km_Ca_MK;
  enddef;
  def map between q_rel and q_rel_ro_gate for
    vars ro and ro;
    vars time and time;
    vars i_Ca_L and i_Ca_L;
    vars Ca_r and Ca_r;
    vars Ca_JSR and Ca_JSR;
  enddef;
enddef;
