<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  renal_anion_exchanger_model.xml

CREATED :  29th May 2007

LAST MODIFIED : 29th May 2007

AUTHOR :  Catherine Lloyd
          The Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.

DESCRIPTION :  This file contains a CellML description of Chang and Fujita's 2001 mathematical model of an anion exchanger in the distal tubule of the rat: it is one component of an overall model of acid/base transport in a distal tubule.

CHANGES:  
  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="renal_anion_exchanger_model" name="renal_anion_exchanger_model">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Mathematical Models of Ionic Transport in the Distal Tubule of the Rat</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This CellML model is a description of Chang and Fujita's 2001 mathematical model of an anion exchanger in the distal tubule of the rat: it is one component of an overall model of acid/base transport in a distal tubule.</para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>
<para>
ABSTRACT: The purpose of this study is to develop a numerical model that simulates acid-base transport in rat distal tubule. We have previously reported a model that deals with transport of Na(+), K(+), Cl(-), and water in this nephron segment (Chang H and Fujita T. Am J Physiol Renal Physiol 276: F931-F951, 1999). In this study, we extend our previous model by incorporating buffer systems, new cell types, and new transport mechanisms. Specifically, the model incorporates bicarbonate, ammonium, and phosphate buffer systems; has cell types corresponding to intercalated cells; and includes the Na/H exchanger, H-ATPase, and anion exchanger. Incorporation of buffer systems has required the following modifications of model equations: new model equations are introduced to represent chemical equilibria of buffer partners [e.g., pH = pK(a) + log(10) (NH(3)/NH(4))], and the formulation of mass conservation is extended to take into account interconversion of buffer partners. Furthermore, finite rates of H(2)CO(3)-CO(2) interconversion are taken into account in modeling the bicarbonate buffer system. Owing to this treatment, the model can simulate the development of disequilibrium pH in the distal tubular fluid. For each new transporter, a state diagram has been constructed to simulate its transport kinetics. With appropriate assignment of maximal transport rates for individual transporters, the model predictions are in agreement with free-flow micropuncture experiments in terms of HCO reabsorption rate in the normal state as well as under the high bicarbonate load. Although the model cannot simulate all of the microperfusion experiments, especially those that showed a flow-dependent increase in HCO reabsorption, the model is consistent with those microperfusion experiments that showed HCO reabsorption rates similar to those in the free-flow micropuncture experiments. We conclude that it is possible to develop a numerical model of the rat distal tubule that simulates acid-base transport, as well as basic solute and water transport, on the basis of tubular geometry, physical principles, and transporter kinetics. Such a model would provide a useful means of integrating detailed kinetic properties of transporters and predicting macroscopic transport characteristics of this nephron segment under physiological and pathophysiological settings.  
</para>

<para>
The original paper reference is cited below:
</para>

<para>
A numerical model of acid-base transport in rat distal tubule, Hangil Chang and Toshiro Fujita, 2001, <emphasis>American Journal of Physiology</emphasis>, 281, F222-F243. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=11457714&amp;dopt=Abstract">PubMed ID: 11457714</ulink>. 
</para>


<informalfigure float="0" id="fig_reaction_diagram2">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>reaction_diagram2</title>
    </objectinfo>
    <imagedata fileref="chang_2001b.png"/>
  </imageobject>
</mediaobject>
<caption>State diagram of the anion exchanger.  In this model, the anion transporter (E) has a single binding site to which Cl<superscript>-</superscript> and HCO<subscript>3</subscript>
            <superscript>-</superscript> competitively bind.  Only the bound forms of the transporter are able to cross the membrane.  (Symbols with the asterisk (*) represent conformations facing the cytosol, symbols without indicate conformations facing the extracellular environment.)</caption>
</informalfigure>

</sect1>
</article>
</documentation>


  
  
  
   <units name="millimolar">
     <unit units="mole" prefix="milli"/>
     <unit units="litre" exponent="-1"/>
   </units>

   <units name="flux">
     <unit units="millimolar"/>
     <unit units="second" exponent="-1"/>
   </units>
   
   <units name="first_order_rate_constant">
     <unit units="second" exponent="-1"/>
   </units>

   <units name="second_order_rate_constant">
     <unit units="millimolar" exponent="-1"/>
     <unit units="second" exponent="-1"/>
   </units>
   
   <component name="environment">
      <variable units="second" public_interface="out" name="time"/>
   </component>
   
   <component name="E" cmeta:id="E">
     
    <variable units="millimolar" public_interface="out" name="E"/>
      
    <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k2"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k4"/>
    <variable units="millimolar" public_interface="in" name="ECl"/>
    <variable units="millimolar" public_interface="in" name="EHCO3"/>
    <variable units="millimolar" public_interface="in" name="HCO3"/>
    <variable units="millimolar" public_interface="in" name="Cl"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> E </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/> 
              <ci> k2 </ci>
              <ci> ECl </ci>
            </apply>
            <apply>
              <times/>
              <ci> k4 </ci>
              <ci> EHCO3 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k1 </ci>
              <ci> Cl </ci>
              <ci> E </ci>
            </apply>
            <apply>
              <times/>
              <ci> k3 </ci>
              <ci> HCO3 </ci>
              <ci> E </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="ECl" cmeta:id="ECl">
     
    <variable units="millimolar" public_interface="out" name="ECl"/>
      
    <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k2"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k9"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k10"/>
    <variable units="millimolar" public_interface="in" name="ECl_"/>
    <variable units="millimolar" public_interface="in" name="E"/>
    <variable units="millimolar" public_interface="in" name="Cl"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> ECl </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k1 </ci>
              <ci> Cl </ci>
              <ci> E </ci>
            </apply>
            <apply>
              <times/>
              <ci> k10 </ci>
              <ci> ECl_ </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k2 </ci>
              <ci> ECl </ci>
            </apply>
            <apply>
              <times/>
              <ci> k9 </ci>
              <ci> ECl </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="EHCO3" cmeta:id="EHCO3">
     
    <variable units="millimolar" public_interface="out" name="EHCO3"/>
      
    <variable units="first_order_rate_constant" public_interface="in" name="k11"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k12"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k4"/>
    <variable units="millimolar" public_interface="in" name="E"/>
    <variable units="millimolar" public_interface="in" name="EHCO3_"/>
    <variable units="millimolar" public_interface="in" name="HCO3"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> EHCO3 </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k3 </ci>
              <ci> HCO3 </ci>
              <ci> E </ci>
            </apply>
            <apply>
              <times/>
              <ci> k12 </ci>
              <ci> EHCO3_ </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k4 </ci>
              <ci> EHCO3 </ci>
            </apply>
            <apply>
              <times/>
              <ci> k11 </ci>
              <ci> EHCO3 </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
 
   <component name="E_" cmeta:id="E_">
     
    <variable units="millimolar" public_interface="out" name="E_"/>
      
    <variable units="second_order_rate_constant" public_interface="in" name="k5"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k6"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k7"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k8"/>
    <variable units="millimolar" public_interface="in" name="ECl_"/>
    <variable units="millimolar" public_interface="in" name="EHCO3_"/>
    <variable units="millimolar" public_interface="in" name="HCO3_"/>
    <variable units="millimolar" public_interface="in" name="Cl_"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> E_ </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/> 
              <ci> k6 </ci>
              <ci> ECl_ </ci>
            </apply>
            <apply>
              <times/>
              <ci> k8 </ci>
              <ci> EHCO3_ </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k5 </ci>
              <ci> Cl_ </ci>
              <ci> E_ </ci>
            </apply>
            <apply>
              <times/>
              <ci> k7 </ci>
              <ci> HCO3_ </ci>
              <ci> E_ </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="ECl_" cmeta:id="ECl_">
     
    <variable units="millimolar" public_interface="out" name="ECl_"/>
      
    <variable units="second_order_rate_constant" public_interface="in" name="k5"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k6"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k9"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k10"/>
    <variable units="millimolar" public_interface="in" name="ECl"/>
    <variable units="millimolar" public_interface="in" name="E_"/>
    <variable units="millimolar" public_interface="in" name="Cl_"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> ECl_ </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k5 </ci>
              <ci> Cl_ </ci>
              <ci> E_ </ci>
            </apply>
            <apply>
              <times/>
              <ci> k9 </ci>
              <ci> ECl </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k6 </ci>
              <ci> ECl_ </ci>
            </apply>
            <apply>
              <times/>
              <ci> k10 </ci>
              <ci> ECl_ </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="EHCO3_" cmeta:id="EHCO3_">
     
    <variable units="millimolar" public_interface="out" name="EHCO3_"/>
      
    <variable units="first_order_rate_constant" public_interface="in" name="k11"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k12"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k7"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k8"/>
    <variable units="millimolar" public_interface="in" name="E_"/>
    <variable units="millimolar" public_interface="in" name="EHCO3"/>
    <variable units="millimolar" public_interface="in" name="HCO3_"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> EHCO3_ </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k7 </ci>
              <ci> HCO3_ </ci>
              <ci> E_ </ci>
            </apply>
            <apply>
              <times/>
              <ci> k11 </ci>
              <ci> EHCO3 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k8 </ci>
              <ci> EHCO3_ </ci>
            </apply>
            <apply>
              <times/>
              <ci> k12 </ci>
              <ci> EHCO3_ </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
   
  <component name="J_Cl_influx" cmeta:id="J_Cl_influx">
    <variable units="flux" public_interface="out" name="J_Cl_influx"/>
     
    <variable units="millimolar" name="Ki_Cl" initial_value="0.528"/>
    <variable units="millimolar" name="Ki_HCO3" initial_value="0.423"/>
 
    <variable units="first_order_rate_constant" public_interface="in" name="k9"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k10"/>
    <variable units="millimolar" public_interface="in" name="ECl_"/>
    <variable units="millimolar" public_interface="in" name="ECl"/>
    <variable units="millimolar" public_interface="in" name="Cl_"/>
    <variable units="millimolar" public_interface="in" name="HCO3_"/>
    <variable units="second" public_interface="in" name="time"/> 
      
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
        <eq/>
            <ci>J_Cl_influx</ci>
            <apply>
          <times/>
               <apply>
            <minus/>
                 <apply>
              <times/>
                   <ci> k9 </ci>
                   <ci> ECl </ci>
                 </apply>
                 <apply>
              <times/>
                   <ci> k10 </ci>
                   <ci> ECl_ </ci>
                 </apply>
               </apply>
               <apply>
            <power/>
                  <apply>
              <plus/>
                     <cn cellml:units="dimensionless"> 1.0 </cn>
                     <apply>
                <divide/>
                        <ci> Cl_ </ci>
                        <ci> Ki_Cl </ci>
                     </apply>
                     <apply>
                <divide/>
                        <ci> HCO3_ </ci>
                        <ci> Ki_HCO3 </ci>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless"> -1.0 </cn>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
 
   <component name="reaction_constants">
    <variable units="second_order_rate_constant" public_interface="out" name="k1" initial_value="1.0E8"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k2" initial_value="7.87E6"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k3" initial_value="1.0E8"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k4" initial_value="8.28E6"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k5" initial_value="1.0E8"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k6" initial_value="7.87E6"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k7" initial_value="1.0E8"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k8" initial_value="8.28E6"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k9" initial_value="5.14E5"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k10" initial_value="9.26E4"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k11" initial_value="3.24E5"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k12" initial_value="5.83E4"/>
    <variable units="millimolar" public_interface="out" name="Cl" initial_value="1.0"/>
    <variable units="millimolar" public_interface="out" name="HCO3" initial_value="1.0"/>
    <variable units="millimolar" public_interface="out" name="Cl_" initial_value="1.0"/>
    <variable units="millimolar" public_interface="out" name="HCO3_" initial_value="1.0"/>
   </component>
   
   
  <connection>
    <map_components component_2="environment" component_1="E"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="ECl"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="EHCO3"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="E_"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="ECl_"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="EHCO3_"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

   <connection>
      <map_components component_2="ECl" component_1="E"/>
      <map_variables variable_2="E" variable_1="E"/>
      <map_variables variable_2="ECl" variable_1="ECl"/>
   </connection>
   
   <connection>
      <map_components component_2="EHCO3" component_1="E"/>
      <map_variables variable_2="E" variable_1="E"/>
      <map_variables variable_2="EHCO3" variable_1="EHCO3"/>
   </connection>

   <connection>
      <map_components component_2="ECl_" component_1="E_"/>
      <map_variables variable_2="E_" variable_1="E_"/>
      <map_variables variable_2="ECl_" variable_1="ECl_"/>
   </connection>
   
   <connection>
      <map_components component_2="EHCO3_" component_1="E_"/>
      <map_variables variable_2="E_" variable_1="E_"/>
      <map_variables variable_2="EHCO3_" variable_1="EHCO3_"/>
   </connection>
   
   <connection>
      <map_components component_2="ECl_" component_1="ECl"/>
      <map_variables variable_2="ECl" variable_1="ECl"/>
      <map_variables variable_2="ECl_" variable_1="ECl_"/>
   </connection>

   <connection>
      <map_components component_2="EHCO3_" component_1="EHCO3"/>
      <map_variables variable_2="EHCO3" variable_1="EHCO3"/>
      <map_variables variable_2="EHCO3_" variable_1="EHCO3_"/>
   </connection>
   
   <connection>
      <map_components component_2="environment" component_1="J_Cl_influx"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>

   <connection>
      <map_components component_2="ECl" component_1="J_Cl_influx"/>
      <map_variables variable_2="ECl" variable_1="ECl"/>
   </connection>

   <connection>
      <map_components component_2="ECl_" component_1="J_Cl_influx"/>
      <map_variables variable_2="ECl_" variable_1="ECl_"/>
   </connection>

   <connection>
      <map_components component_2="J_Cl_influx" component_1="reaction_constants"/>
      <map_variables variable_2="HCO3_" variable_1="HCO3_"/>
      <map_variables variable_2="Cl_" variable_1="Cl_"/>
      <map_variables variable_2="k9" variable_1="k9"/>
      <map_variables variable_2="k10" variable_1="k10"/>
   </connection>
   
   <connection>
      <map_components component_2="reaction_constants" component_1="E"/>
      <map_variables variable_2="Cl" variable_1="Cl"/>
      <map_variables variable_2="HCO3" variable_1="HCO3"/>
      <map_variables variable_2="k1" variable_1="k1"/>
      <map_variables variable_2="k2" variable_1="k2"/>
      <map_variables variable_2="k3" variable_1="k3"/>
      <map_variables variable_2="k4" variable_1="k4"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="ECl"/>
      <map_variables variable_2="Cl" variable_1="Cl"/>
      <map_variables variable_2="k1" variable_1="k1"/>
      <map_variables variable_2="k2" variable_1="k2"/>
      <map_variables variable_2="k9" variable_1="k9"/>
      <map_variables variable_2="k10" variable_1="k10"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="EHCO3"/>
      <map_variables variable_2="HCO3" variable_1="HCO3"/>
      <map_variables variable_2="k11" variable_1="k11"/>
      <map_variables variable_2="k12" variable_1="k12"/>
      <map_variables variable_2="k3" variable_1="k3"/>
      <map_variables variable_2="k4" variable_1="k4"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="E_"/>
      <map_variables variable_2="Cl_" variable_1="Cl_"/>
      <map_variables variable_2="HCO3_" variable_1="HCO3_"/>
      <map_variables variable_2="k5" variable_1="k5"/>
      <map_variables variable_2="k6" variable_1="k6"/>
      <map_variables variable_2="k7" variable_1="k7"/>
      <map_variables variable_2="k8" variable_1="k8"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="ECl_"/>
      <map_variables variable_2="Cl_" variable_1="Cl_"/>
      <map_variables variable_2="k5" variable_1="k5"/>
      <map_variables variable_2="k6" variable_1="k6"/>
      <map_variables variable_2="k9" variable_1="k9"/>
      <map_variables variable_2="k10" variable_1="k10"/>
   </connection>

   <connection>
      <map_components component_2="reaction_constants" component_1="EHCO3_"/>
      <map_variables variable_2="HCO3_" variable_1="HCO3_"/>
      <map_variables variable_2="k11" variable_1="k11"/>
      <map_variables variable_2="k12" variable_1="k12"/>
      <map_variables variable_2="k7" variable_1="k7"/>
      <map_variables variable_2="k8" variable_1="k8"/>
   </connection>


<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#f937e934-8275-4944-9e95-b211b7323928">
    <rdf:li>kidney</rdf:li>
    <rdf:li>electrophysiology</rdf:li>
    <rdf:li>distal tubule</rdf:li>
    <rdf:li>renal</rdf:li>
    <rdf:li>acid-base transport</rdf:li>
	<rdf:li>ion transport</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#84cfad78-86ec-4a5e-984c-10179e23967a">
    <rdf:li rdf:resource="rdf:#07e3bb61-5332-4397-b37a-1feb435221ce"/>
    <rdf:li rdf:resource="rdf:#93e50821-61d8-4e14-965b-c34a297ce832"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#4f3c3f13-1b4e-4459-a661-9cb25f425e6d">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:title>Anion exchanger</dc:title>
    <dc:publisher>The University of Auckland, Auckland Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#5a546491-ea6d-4d24-b8b8-ddc15a2f4732"/>
    <dcterms:created rdf:resource="rdf:#c64532b4-f286-419f-844e-b5273df6fa82"/>
    <dc:creator rdf:resource="rdf:#d9fbd36c-0495-438c-b0f1-6fee03763597"/>
    <cmeta:modification rdf:resource="rdf:#2b0e88d1-5f67-48d7-bb97-65d2b564ecc3"/>
  </rdf:Description>
  <rdf:Description rdf:about="#ECl_">
    <dcterms:alternative>Cl- loaded anion exchanger intracellular side</dcterms:alternative>
    <dc:title>ECl_</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#E">
    <dcterms:alternative>anion exchanger extracellular side</dcterms:alternative>
    <dc:title>E</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#E_">
    <dcterms:alternative>anion exchanger intracellular side</dcterms:alternative>
    <dc:title>E_</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#549a246c-5ba8-4c15-8013-c40ad2737e3e">
    <dc:creator rdf:resource="rdf:#84cfad78-86ec-4a5e-984c-10179e23967a"/>
    <dc:title>A numerical model of acid-base transport in rat distal tubule</dc:title>
    <bqs:volume>281</bqs:volume>
    <bqs:first_page>F222</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#e3150c45-ae5a-43b6-9e11-0e569b2ac035"/>
    <dcterms:issued rdf:resource="rdf:#5676a534-2631-42ff-a887-bfbee49a807b"/>
    <bqs:last_page>F243</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#75b81c93-e1d7-42ca-98c7-e96ffea9e2e8">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#f937e934-8275-4944-9e95-b211b7323928"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#93e50821-61d8-4e14-965b-c34a297ce832">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#ce6b2713-cdf7-4d45-983c-5c449f2a3e64"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#115fc47b-ea68-4d4a-9dc8-2ff29a507807">
    <vCard:Given>Hangil</vCard:Given>
    <vCard:Family>Chang</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#af764fcc-ce36-40d8-a435-8e60ddabb458">
    <dcterms:W3CDTF>2007-06-05T09:56:45+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#854bfdb3-5bb8-4d83-bf50-963e4d046689">
    <dc:subject rdf:resource="rdf:#75b81c93-e1d7-42ca-98c7-e96ffea9e2e8"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ce6b2713-cdf7-4d45-983c-5c449f2a3e64">
    <vCard:Given>Toshiro</vCard:Given>
    <vCard:Family>Fujita</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5a546491-ea6d-4d24-b8b8-ddc15a2f4732">
    <dc:creator rdf:resource="rdf:#aab1b7f9-533d-41a7-9a74-5a60b9e9955b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0072b591-6d8b-41b9-93b2-1cf34f5a0c83">
    <bqs:Pubmed_id>11457714</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#549a246c-5ba8-4c15-8013-c40ad2737e3e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c64532b4-f286-419f-844e-b5273df6fa82">
    <dcterms:W3CDTF>2007-05-29T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2b0e88d1-5f67-48d7-bb97-65d2b564ecc3">
    <dcterms:modified rdf:resource="rdf:#af764fcc-ce36-40d8-a435-8e60ddabb458"/>
    <rdf:value>The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics. This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology. &#13;
&#13;
The model runs in the PCEnv simulator but gives a flat output.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#db436cbe-6c06-4d4e-858e-b90b3d44204f"/>
  </rdf:Description>
  <rdf:Description rdf:about="#ECl">
    <dcterms:alternative>Cl- loaded anion exchanger extracellular side</dcterms:alternative>
    <dc:title>ECl</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#05c37672-4478-40ad-96d7-c990030c5c39">
    <dc:creator rdf:resource="rdf:#f736e314-f3da-434c-ad2b-bbccb2920469"/>
    <rdf:value>This is the CellML description of Chang and Fujita's 2001 mathematical model of an anion exchanger in the distal tubule of the rat: it is one component of an overall model of acid/base transport in a distal tubule.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d9fbd36c-0495-438c-b0f1-6fee03763597">
    <vCard:ORG rdf:resource="rdf:#5deadb5a-7a44-4927-8e7b-2017b0cc92d1"/>
    <vCard:EMAIL rdf:resource="rdf:#f8c2ecc1-f5f3-4362-a42a-6cda33af553b"/>
    <vCard:N rdf:resource="rdf:#4f3c3f13-1b4e-4459-a661-9cb25f425e6d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f8c2ecc1-f5f3-4362-a42a-6cda33af553b">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f736e314-f3da-434c-ad2b-bbccb2920469">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0f8a9efb-8526-4077-bfbc-b2bb54e2954e">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5deadb5a-7a44-4927-8e7b-2017b0cc92d1">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5676a534-2631-42ff-a887-bfbee49a807b">
    <dcterms:W3CDTF>2001-08</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#07e3bb61-5332-4397-b37a-1feb435221ce">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#115fc47b-ea68-4d4a-9dc8-2ff29a507807"/>
  </rdf:Description>
  <rdf:Description rdf:about="#EHCO3">
    <dcterms:alternative>HCO3- loaded anion exchanger extracellular side</dcterms:alternative>
    <dc:title>EHCO3</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#db436cbe-6c06-4d4e-858e-b90b3d44204f">
    <vCard:N rdf:resource="rdf:#0f8a9efb-8526-4077-bfbc-b2bb54e2954e"/>
  </rdf:Description>
  <rdf:Description rdf:about="#EHCO3_">
    <dcterms:alternative>HCO3- loaded anion exchanger intracellular side</dcterms:alternative>
    <dc:title>EHCO3_</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e3150c45-ae5a-43b6-9e11-0e569b2ac035">
    <dc:title>American Journal of Physiology</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#renal_anion_exchanger_model">
    <dc:title>
        Chang and Fujita's 2001 mathematical model of an anion exchanger in the 
        distal tubule of the rat: it is one component of an overall model of 
        acid/base transport in a distal tubule.
      </dc:title>
    <cmeta:bio_entity>Renal Distal Tubule</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#05c37672-4478-40ad-96d7-c990030c5c39"/>
    <bqs:reference rdf:resource="rdf:#0072b591-6d8b-41b9-93b2-1cf34f5a0c83"/>
    <bqs:reference rdf:resource="rdf:#854bfdb3-5bb8-4d83-bf50-963e4d046689"/>
    <cmeta:species>Rat</cmeta:species>
  </rdf:Description>
</rdf:RDF>
</model>