// publisher: The University of Auckland, Auckland Bioengineering Institute
// comment: FN Catherine Lloyd; This is the CellML description of Chang and Fujita's 1999 numerical model of the renal distal tubule. It should be noted that the initial conditions used in this description represent those in the early distal tubule. For model representations of the late distal tublule, these initial values should be replaced with those listed in the orginal paper for the late distal tubule. The model from the original paper has been modified slightly to include differential equations defining the change in solute concentrations over time. These equations were added to facilitate the use of the CellML code in CMISS.
// created: W3CDTF 2003-02-17T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2007-06-05T09:18:35+12:00; The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics. This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology. The model runs in the PCEnv simulator but gives a flat output.; Given Catherine; Family Lloyd; Other May
// title: A CellML description of Chang and Fujita's 1999 numerical model of the renal distal tubule.
// bio_entity: Renal Distal Tubule
// comment: FN Catherine Lloyd; This is the CellML description of Chang and Fujita's 1999 numerical model of the renal distal tubule. It should be noted that the initial conditions used in this description represent those in the early distal tubule. For model representations of the late distal tublule, these initial values should be replaced with those listed in the orginal paper for the late distal tubule. The model from the original paper has been modified slightly to include differential equations defining the change in solute concentrations over time. These equations were added to facilitate the use of the CellML code in CMISS.
// reference: Pubmed_id 10362782; Given Hangil; Family Chang; Given Toshiro; Family Fujita; title A numerical model of the renal distal tubule; volume 276; first_page F931; title American Journal of Physiology; W3CDTF 1999-01-01; last_page F951
// reference: subject_type keyword; kidney; electrophysiology
def model chang_1999 as
  // A numerical model of the renal distal tubule
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This is the CellML description of Chang and Fujita's 1999 numerical model of the renal distal tubule. It should be noted that the initial conditions used in this description represent those in the early distal tubule. For model representations of the late distal tublule, these initial values should be replaced with those listed in the orginal paper for the late distal tubule. The model from the original paper has been modified slightly to include differential equations defining the change in solute concentrations over time. These equations were added to facilitate the use of the CellML code in CMISS. Note that the model is not running correctly in COR or OpenCell and there are unit inconsistencies.
  //
  // Model Structure
  //
  // ABSTRACT: A numerical model of the rat distal tubule was developed to simulate water and solute transport in this nephron segment. This model incorporates the following: 1) Na-Cl cotransporter, K-Cl cotransporter, Na channel, K channel, and Cl channel in the luminal membrane; 2) Na-K-ATPase, K channel, and Cl channel in the basolateral membrane; and 3) conductances for Na, K, and Cl in the paracellular pathway. Transport rates were calculated using kinetic equations. Axial heterogeneity was represented by partitioning the model into two subsegments with different sets of model parameters. Model equations derived from the principles of mass conservation and electrical neutrality were solved numerically. Values of the model parameters were adjusted to minimize a penalty function that was devised to quantify the difference between model predictions and experimental results. The developed model could simulate the water and solute transport of the distal tubule in the normal state, as well as in conditions including thiazide or amiloride application and various levels of sodium load and tubular flow rate.
  //
  // The original paper reference is cited below:
  //
  // A numerical model of the renal distal tubule, Hangil Chang and Toshiro Fujita, 1999, American Journal of Physiology, 276, F952-F959. PubMed ID: 10362782 (http://www.ncbi.nlm.nih.gov/pubmed/10362782)
  //
  // diagram of the model
  //
  // Transport mechanisms of model tubule. In the luminal cell membrane, there are Na-Cl cotransporter, K-Cl cotransporter, Na channel, K channel, and Cl channel. In the basolateral cell membrane, there are Na-K-ATPase, K channel, and Cl channel. In the paracellular pathway, which faces luminal and basolateral compartments, there are conductances for sodium, potassium, and chloride. Axial heterogeneity of the distal tubule was represented by changing the model parameters in the early and the late parts of the model tubule.
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit cm_per_s as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit mmol_per_cm3 as
    unit mole {pref: milli};
    unit metre {pref: centi, expo: -3};
  enddef;
  def unit flux as
    unit mole {pref: milli};
    unit metre {pref: centi, expo: -3};
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol as
    unit coulomb;
    unit mole {pref: milli, expo: -1};
  enddef;
  def unit J_per_mmol as
    unit joule;
    unit mole {pref: milli, expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit mmHg as base unit;
  def unit cm_per_s_mmHg as
    unit metre {pref: centi};
    unit second {expo: -1};
    unit mmHg {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp imported_variables as
    var C_m_Imp: mmol_per_cm3 {priv: out, init: 0.1033};
    var C_c_Imp: mmol_per_cm3 {priv: out, init: 0.1124};
    var psi_m: millivolt {priv: out, init: -28.0};
    var psi_c: millivolt {priv: out, init: -86.4};
  enddef;

  def comp solute_concentrations as
    var C_m_Na: mmol_per_cm3 {pub: out, init: 0.05};
    var C_m_K: mmol_per_cm3 {pub: out, init: 0.002};
    var C_m_Cl: mmol_per_cm3 {pub: out, init: 0.03};
    var C_c_Na: mmol_per_cm3 {pub: out, init: 0.0164};
    var C_c_K: mmol_per_cm3 {pub: out, init: 0.1637};
    var C_c_Cl: mmol_per_cm3 {pub: out, init: 0.0203};
    var C_s_Na: mmol_per_cm3 {pub: out, init: 1.438E-1};
    var C_s_K: mmol_per_cm3 {pub: out, init: 4.25E-3};
    var C_s_Cl: mmol_per_cm3 {pub: out, init: 1.12E-1};
    var J_mc_Na: flux {pub: in};
    var J_ms_Na: flux {pub: in};
    var J_sc_Na: flux {pub: in};
    var J_mc_K: flux {pub: in};
    var J_ms_K: flux {pub: in};
    var J_sc_K: flux {pub: in};
    var J_mc_Cl: flux {pub: in};
    var J_ms_Cl: flux {pub: in};
    var J_sc_Cl: flux {pub: in};
    var time: second {pub: in};
    ode(C_m_Na, time) = -(J_mc_Na+J_ms_Na);
    ode(C_s_Na, time) = J_ms_Na-J_sc_Na;
    ode(C_c_Na, time) = J_mc_Na+J_sc_Na;
    ode(C_m_K, time) = -(J_mc_K+J_ms_K);
    ode(C_s_K, time) = J_ms_K-J_sc_K;
    ode(C_c_K, time) = J_mc_K+J_sc_K;
    ode(C_m_Cl, time) = -(J_mc_Cl+J_ms_Cl);
    ode(C_s_Cl, time) = J_ms_Cl-J_sc_Cl;
    ode(C_c_Cl, time) = J_mc_Cl+J_sc_Cl;
  enddef;

  def comp constants as
    var RT: J_per_mmol {pub: out, init: 2.579};
    var F: C_per_mmol {pub: out, init: 96.48};
    var C_s_Imp: mmol_per_cm3 {pub: out, init: 4.525E-2};
    var psi_s: millivolt {pub: out, init: 0.0};
  enddef;

  def comp mc_sodium_flux as
    var J_mc_Na: flux {pub: out};
    var J_mc_NaCl: flux {pub: out};
    var G_mc_Na: flux;
    var P_mc_Na: cm_per_s {init: 3.27E-6};
    var J_mc_NaCl_max: flux {init: 3.21E-5};
    var K_mc_Na_NaCl: mmol_per_cm3 {init: 5.11E-2};
    var K_mc_Cl_NaCl: mmol_per_cm3 {init: 1.92E-2};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    var F: C_per_mmol {pub: in};
    var C_m_Na: mmol_per_cm3 {pub: in};
    var C_c_Na: mmol_per_cm3 {pub: in};
    var C_m_Cl: mmol_per_cm3 {pub: in};
    var C_c_Cl: mmol_per_cm3 {pub: in};
    var psi_m: millivolt {pub: in};
    var psi_c: millivolt {pub: in};
    J_mc_Na = J_mc_NaCl+G_mc_Na;
    G_mc_Na = P_mc_Na*(F*(psi_m-psi_c)/RT)*((C_m_Na-C_c_Na*exp(-(F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_c))));
    J_mc_NaCl = J_mc_NaCl_max*((C_m_Na/K_mc_Na_NaCl*(C_m_Cl/K_mc_Cl_NaCl)-C_c_Na/K_mc_Na_NaCl*(C_c_Cl/K_mc_Cl_NaCl))/((1.0{dimensionless}+C_m_Na/K_mc_Na_NaCl*(C_m_Cl/K_mc_Cl_NaCl))*(1.0{dimensionless}+C_c_Na/K_mc_Na_NaCl)*(1.0{dimensionless}+C_c_Cl/K_mc_Cl_NaCl)+(1.0{dimensionless}+C_c_Na/K_mc_Na_NaCl*(C_c_Cl/K_mc_Cl_NaCl))*(1.0{dimensionless}+C_m_Na/K_mc_Na_NaCl)*(1.0{dimensionless}+C_m_Cl/K_mc_Cl_NaCl)));
  enddef;

  def comp mc_potassium_flux as
    var J_mc_K: flux {pub: out};
    var J_mc_KCl: flux {pub: out};
    var G_mc_K: flux;
    var J_mc_KCl_max: flux {init: 6.31E-8};
    var K_mc_K_KCl: mmol_per_cm3 {init: 5.30E-2};
    var K_mc_Cl_KCl: mmol_per_cm3 {init: 2.13E-2};
    var P_mc_K: cm_per_s {init: 4.90E-7};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    var F: C_per_mmol {pub: in};
    var C_m_K: mmol_per_cm3 {pub: in};
    var C_c_K: mmol_per_cm3 {pub: in};
    var C_m_Cl: mmol_per_cm3 {pub: in};
    var C_c_Cl: mmol_per_cm3 {pub: in};
    var psi_m: millivolt {pub: in};
    var psi_c: millivolt {pub: in};
    J_mc_K = J_mc_KCl+G_mc_K;
    G_mc_K = P_mc_K*(F*(psi_m-psi_c)/RT)*((C_m_K-C_c_K*exp(-(F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_c))));
    J_mc_KCl = J_mc_KCl_max*((C_m_K/K_mc_K_KCl*(C_m_Cl/K_mc_Cl_KCl)-C_c_K/K_mc_K_KCl*(C_c_Cl/K_mc_Cl_KCl))/((1.0{dimensionless}+C_m_K/K_mc_K_KCl*(C_m_Cl/K_mc_Cl_KCl))*(1.0{dimensionless}+C_c_K/K_mc_K_KCl)*(1.0{dimensionless}+C_c_Cl/K_mc_Cl_KCl)+(1.0{dimensionless}+C_c_K/K_mc_K_KCl*(C_c_Cl/K_mc_Cl_KCl))*(1.0{dimensionless}+C_m_K/K_mc_K_KCl)*(1.0{dimensionless}+C_m_Cl/K_mc_Cl_KCl)));
  enddef;

  def comp mc_chloride_flux as
    var J_mc_Cl: flux {pub: out};
    var G_mc_Cl: flux;
    var P_mc_Cl: cm_per_s {init: 1.43E-6};
    var time: second {pub: in};
    var J_mc_NaCl: flux {pub: in};
    var J_mc_KCl: flux {pub: in};
    var RT: J_per_mmol {pub: in};
    var F: C_per_mmol {pub: in};
    var C_m_Cl: mmol_per_cm3 {pub: in};
    var C_c_Cl: mmol_per_cm3 {pub: in};
    var psi_m: millivolt {pub: in};
    var psi_c: millivolt {pub: in};
    J_mc_Cl = J_mc_NaCl+J_mc_KCl+G_mc_Cl;
    G_mc_Cl = P_mc_Cl*(-1.0{dimensionless}*F*(psi_m-psi_c)/RT)*((C_m_Cl-C_c_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_c))));
  enddef;

  def comp sc_sodium_flux as
    var J_a: flux {pub: out};
    var J_sc_Na: flux {pub: out};
    var J_a_max: flux {init: 2.69E-6};
    var K_Na_ATPase: mmol_per_cm3 {init: 1.20E-2};
    var time: second {pub: in};
    var C_c_Na: mmol_per_cm3 {pub: in};
    J_sc_Na = -3.0{dimensionless}*J_a;
    J_a = J_a_max*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_Na_ATPase/C_c_Na, 3.0{dimensionless})));
  enddef;

  def comp sc_potassium_flux as
    var J_sc_K: flux {pub: out};
    var G_sc_K: flux;
    var P_sc_K: cm_per_s {init: 4.74E-4};
    var J_a: flux {pub: in};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    var F: C_per_mmol {pub: in};
    var C_s_K: mmol_per_cm3 {pub: in};
    var C_c_K: mmol_per_cm3 {pub: in};
    var psi_s: millivolt {pub: in};
    var psi_c: millivolt {pub: in};
    J_sc_K = 2.0{dimensionless}*J_a+G_sc_K;
    G_sc_K = P_sc_K*(F*(psi_s-psi_c)/RT)*((C_s_K-C_c_K*exp(-(F/RT)*(psi_s-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_s-psi_c))));
  enddef;

  def comp sc_chloride_flux as
    var J_sc_Cl: flux {pub: out};
    var G_sc_Cl: flux;
    var P_sc_Cl: cm_per_s {init: 9.16E-5};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    var F: C_per_mmol {pub: in};
    var C_s_Cl: mmol_per_cm3 {pub: in};
    var C_c_Cl: mmol_per_cm3 {pub: in};
    var psi_s: millivolt {pub: in};
    var psi_c: millivolt {pub: in};
    J_sc_Cl = G_sc_Cl;
    G_sc_Cl = P_sc_Cl*(-1.0{dimensionless}*F*(psi_s-psi_c)/RT)*((C_s_Cl-C_c_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_s-psi_c)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_s-psi_c))));
  enddef;

  def comp ms_sodium_flux as
    var J_ms_Na: flux {pub: out};
    var G_ms_Na: flux;
    var P_ms_Na: cm_per_s {init: 4.80E-6};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    var F: C_per_mmol {pub: in};
    var C_m_Na: mmol_per_cm3 {pub: in};
    var C_s_Na: mmol_per_cm3 {pub: in};
    var psi_m: millivolt {pub: in};
    var psi_s: millivolt {pub: in};
    J_ms_Na = G_ms_Na;
    G_ms_Na = P_ms_Na*(F*(psi_m-psi_s)/RT)*((C_m_Na-C_s_Na*exp(-(F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_s))));
  enddef;

  def comp ms_potassium_flux as
    var J_ms_K: flux {pub: out};
    var G_ms_K: flux;
    var P_ms_K: cm_per_s {init: 4.80E-6};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    var F: C_per_mmol {pub: in};
    var C_m_K: mmol_per_cm3 {pub: in};
    var C_s_K: mmol_per_cm3 {pub: in};
    var psi_m: millivolt {pub: in};
    var psi_s: millivolt {pub: in};
    J_ms_K = G_ms_K;
    G_ms_K = P_ms_K*(F*(psi_m-psi_s)/RT)*((C_m_K-C_s_K*exp(-(F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_s))));
  enddef;

  def comp ms_chloride_flux as
    var J_ms_Cl: flux {pub: out};
    var G_ms_Cl: flux;
    var P_ms_Cl: cm_per_s {init: 2.40E-6};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    var F: C_per_mmol {pub: in};
    var C_m_Cl: mmol_per_cm3 {pub: in};
    var C_s_Cl: mmol_per_cm3 {pub: in};
    var psi_m: millivolt {pub: in};
    var psi_s: millivolt {pub: in};
    J_ms_Cl = G_ms_Cl;
    G_ms_Cl = P_ms_Cl*(-1.0{dimensionless}*F*(psi_m-psi_s)/RT)*((C_m_Cl-C_s_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_s))));
  enddef;

  def comp total_transepithelial_sodium_flux as
    var J_Na: flux;
    var J_mc_Na: flux {pub: in};
    var J_ms_Na: flux {pub: in};
    var time: second {pub: in};
    J_Na = J_mc_Na+J_ms_Na;
  enddef;

  def comp total_transepithelial_potassium_flux as
    var J_K: flux;
    var J_mc_K: flux {pub: in};
    var J_ms_K: flux {pub: in};
    var time: second {pub: in};
    J_K = J_mc_K+J_ms_K;
  enddef;

  def comp total_transepithelial_chloride_flux as
    var J_Cl: flux;
    var J_mc_Cl: flux {pub: in};
    var J_ms_Cl: flux {pub: in};
    var time: second {pub: in};
    J_Cl = J_mc_Cl+J_ms_Cl;
  enddef;

  def comp osmolarities as
    var Osm_m: mmol_per_cm3 {pub: out};
    var Osm_c: mmol_per_cm3 {pub: out};
    var Osm_s: mmol_per_cm3 {pub: out};
    var C_m_Na: mmol_per_cm3 {pub: in};
    var C_m_Cl: mmol_per_cm3 {pub: in};
    var C_m_K: mmol_per_cm3 {pub: in};
    var C_m_Imp: mmol_per_cm3 {pub: in};
    var C_c_Na: mmol_per_cm3 {pub: in};
    var C_c_Cl: mmol_per_cm3 {pub: in};
    var C_c_K: mmol_per_cm3 {pub: in};
    var C_c_Imp: mmol_per_cm3 {pub: in};
    var C_s_Na: mmol_per_cm3 {pub: in};
    var C_s_Cl: mmol_per_cm3 {pub: in};
    var C_s_K: mmol_per_cm3 {pub: in};
    var C_s_Imp: mmol_per_cm3 {pub: in};
    Osm_m = C_m_Na+C_m_K+C_m_Cl+C_m_Imp;
    Osm_c = C_c_Na+C_c_K+C_c_Cl+C_c_Imp;
    Osm_s = C_s_Na+C_s_K+C_s_Cl+C_s_Imp;
  enddef;

  def comp mc_transepithelial_volume_flux as
    var J_mc_v: cm_per_s {pub: out};
    var L_mc_v: cm_per_s_mmHg {init: 5.22E-9};
    var Osm_m: mmol_per_cm3 {pub: in};
    var Osm_c: mmol_per_cm3 {pub: in};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    J_mc_v = L_mc_v*RT*(Osm_m-Osm_c);
  enddef;

  def comp ms_transepithelial_volume_flux as
    var J_ms_v: cm_per_s {pub: out};
    var L_ms_v: cm_per_s_mmHg {init: 0.0};
    var Osm_m: mmol_per_cm3 {pub: in};
    var Osm_s: mmol_per_cm3 {pub: in};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    J_ms_v = L_ms_v*RT*(Osm_m-Osm_s);
  enddef;

  def comp sc_transepithelial_volume_flux as
    var J_sc_v: cm_per_s;
    var L_sc_v: cm_per_s_mmHg {init: 5.22E-7};
    var Osm_s: mmol_per_cm3 {pub: in};
    var Osm_c: mmol_per_cm3 {pub: in};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    J_sc_v = L_sc_v*RT*(Osm_s-Osm_c);
  enddef;

  def comp total_transepithelial_volume_flux as
    var J_v: cm_per_s;
    var J_mc_v: cm_per_s {pub: in};
    var J_ms_v: cm_per_s {pub: in};
    var time: second {pub: in};
    J_v = J_mc_v+J_ms_v;
  enddef;

  def group as encapsulation for
    comp imported_variables incl
      comp environment;
      comp constants;
      comp solute_concentrations;
      comp osmolarities;
      comp mc_sodium_flux;
      comp mc_potassium_flux;
      comp mc_chloride_flux;
      comp sc_sodium_flux;
      comp sc_potassium_flux;
      comp sc_chloride_flux;
      comp ms_sodium_flux;
      comp ms_potassium_flux;
      comp ms_chloride_flux;
      comp total_transepithelial_sodium_flux;
      comp total_transepithelial_potassium_flux;
      comp total_transepithelial_chloride_flux;
      comp mc_transepithelial_volume_flux;
      comp ms_transepithelial_volume_flux;
      comp sc_transepithelial_volume_flux;
      comp total_transepithelial_volume_flux;
    endcomp;
  enddef;
  def map between mc_sodium_flux and environment for
    vars time and time;
  enddef;
  def map between mc_potassium_flux and environment for
    vars time and time;
  enddef;
  def map between mc_chloride_flux and environment for
    vars time and time;
  enddef;
  def map between sc_sodium_flux and environment for
    vars time and time;
  enddef;
  def map between sc_potassium_flux and environment for
    vars time and time;
  enddef;
  def map between sc_chloride_flux and environment for
    vars time and time;
  enddef;
  def map between ms_sodium_flux and environment for
    vars time and time;
  enddef;
  def map between ms_potassium_flux and environment for
    vars time and time;
  enddef;
  def map between ms_chloride_flux and environment for
    vars time and time;
  enddef;
  def map between total_transepithelial_sodium_flux and environment for
    vars time and time;
  enddef;
  def map between total_transepithelial_potassium_flux and environment for
    vars time and time;
  enddef;
  def map between total_transepithelial_chloride_flux and environment for
    vars time and time;
  enddef;
  def map between mc_transepithelial_volume_flux and environment for
    vars time and time;
  enddef;
  def map between ms_transepithelial_volume_flux and environment for
    vars time and time;
  enddef;
  def map between sc_transepithelial_volume_flux and environment for
    vars time and time;
  enddef;
  def map between total_transepithelial_volume_flux and environment for
    vars time and time;
  enddef;
  def map between solute_concentrations and environment for
    vars time and time;
  enddef;
  def map between mc_sodium_flux and constants for
    vars RT and RT;
    vars F and F;
  enddef;
  def map between mc_potassium_flux and constants for
    vars RT and RT;
    vars F and F;
  enddef;
  def map between mc_chloride_flux and constants for
    vars RT and RT;
    vars F and F;
  enddef;
  def map between sc_potassium_flux and constants for
    vars RT and RT;
    vars F and F;
    vars psi_s and psi_s;
  enddef;
  def map between sc_chloride_flux and constants for
    vars RT and RT;
    vars F and F;
    vars psi_s and psi_s;
  enddef;
  def map between ms_sodium_flux and constants for
    vars RT and RT;
    vars F and F;
    vars psi_s and psi_s;
  enddef;
  def map between ms_potassium_flux and constants for
    vars RT and RT;
    vars F and F;
    vars psi_s and psi_s;
  enddef;
  def map between ms_chloride_flux and constants for
    vars RT and RT;
    vars F and F;
    vars psi_s and psi_s;
  enddef;
  def map between mc_transepithelial_volume_flux and constants for
    vars RT and RT;
  enddef;
  def map between ms_transepithelial_volume_flux and constants for
    vars RT and RT;
  enddef;
  def map between sc_transepithelial_volume_flux and constants for
    vars RT and RT;
  enddef;
  def map between mc_sodium_flux and total_transepithelial_sodium_flux for
    vars J_mc_Na and J_mc_Na;
  enddef;
  def map between mc_sodium_flux and mc_chloride_flux for
    vars J_mc_NaCl and J_mc_NaCl;
  enddef;
  def map between mc_potassium_flux and total_transepithelial_potassium_flux for
    vars J_mc_K and J_mc_K;
  enddef;
  def map between mc_potassium_flux and mc_chloride_flux for
    vars J_mc_KCl and J_mc_KCl;
  enddef;
  def map between mc_chloride_flux and total_transepithelial_chloride_flux for
    vars J_mc_Cl and J_mc_Cl;
  enddef;
  def map between sc_sodium_flux and sc_potassium_flux for
    vars J_a and J_a;
  enddef;
  def map between ms_sodium_flux and total_transepithelial_sodium_flux for
    vars J_ms_Na and J_ms_Na;
  enddef;
  def map between ms_potassium_flux and total_transepithelial_potassium_flux for
    vars J_ms_K and J_ms_K;
  enddef;
  def map between ms_chloride_flux and total_transepithelial_chloride_flux for
    vars J_ms_Cl and J_ms_Cl;
  enddef;
  def map between mc_transepithelial_volume_flux and total_transepithelial_volume_flux for
    vars J_mc_v and J_mc_v;
  enddef;
  def map between ms_transepithelial_volume_flux and total_transepithelial_volume_flux for
    vars J_ms_v and J_ms_v;
  enddef;
  def map between imported_variables and mc_sodium_flux for
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between solute_concentrations and mc_sodium_flux for
    vars C_c_Na and C_c_Na;
    vars C_c_Cl and C_c_Cl;
    vars C_m_Na and C_m_Na;
    vars C_m_Cl and C_m_Cl;
    vars J_mc_Na and J_mc_Na;
  enddef;
  def map between imported_variables and mc_potassium_flux for
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between solute_concentrations and mc_potassium_flux for
    vars C_c_K and C_c_K;
    vars C_c_Cl and C_c_Cl;
    vars C_m_K and C_m_K;
    vars C_m_Cl and C_m_Cl;
    vars J_mc_K and J_mc_K;
  enddef;
  def map between imported_variables and mc_chloride_flux for
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between solute_concentrations and mc_chloride_flux for
    vars C_c_Cl and C_c_Cl;
    vars C_m_Cl and C_m_Cl;
    vars J_mc_Cl and J_mc_Cl;
  enddef;
  def map between solute_concentrations and sc_sodium_flux for
    vars C_c_Na and C_c_Na;
    vars J_sc_Na and J_sc_Na;
  enddef;
  def map between imported_variables and sc_potassium_flux for
    vars psi_c and psi_c;
  enddef;
  def map between solute_concentrations and sc_potassium_flux for
    vars C_c_K and C_c_K;
    vars C_s_K and C_s_K;
    vars J_sc_K and J_sc_K;
  enddef;
  def map between imported_variables and sc_chloride_flux for
    vars psi_c and psi_c;
  enddef;
  def map between solute_concentrations and sc_chloride_flux for
    vars C_c_Cl and C_c_Cl;
    vars C_s_Cl and C_s_Cl;
    vars J_sc_Cl and J_sc_Cl;
  enddef;
  def map between imported_variables and ms_sodium_flux for
    vars psi_m and psi_m;
  enddef;
  def map between solute_concentrations and ms_sodium_flux for
    vars C_m_Na and C_m_Na;
    vars C_s_Na and C_s_Na;
    vars J_ms_Na and J_ms_Na;
  enddef;
  def map between imported_variables and ms_potassium_flux for
    vars psi_m and psi_m;
  enddef;
  def map between solute_concentrations and ms_potassium_flux for
    vars C_m_K and C_m_K;
    vars C_s_K and C_s_K;
    vars J_ms_K and J_ms_K;
  enddef;
  def map between imported_variables and ms_chloride_flux for
    vars psi_m and psi_m;
  enddef;
  def map between solute_concentrations and ms_chloride_flux for
    vars C_m_Cl and C_m_Cl;
    vars C_s_Cl and C_s_Cl;
    vars J_ms_Cl and J_ms_Cl;
  enddef;
  def map between solute_concentrations and osmolarities for
    vars C_m_Cl and C_m_Cl;
    vars C_m_Na and C_m_Na;
    vars C_m_K and C_m_K;
    vars C_c_Cl and C_c_Cl;
    vars C_c_Na and C_c_Na;
    vars C_c_K and C_c_K;
    vars C_s_Cl and C_s_Cl;
    vars C_s_Na and C_s_Na;
    vars C_s_K and C_s_K;
  enddef;
  def map between imported_variables and osmolarities for
    vars C_m_Imp and C_m_Imp;
    vars C_c_Imp and C_c_Imp;
  enddef;
  def map between constants and osmolarities for
    vars C_s_Imp and C_s_Imp;
  enddef;
  def map between osmolarities and ms_transepithelial_volume_flux for
    vars Osm_m and Osm_m;
    vars Osm_s and Osm_s;
  enddef;
  def map between osmolarities and sc_transepithelial_volume_flux for
    vars Osm_c and Osm_c;
    vars Osm_s and Osm_s;
  enddef;
  def map between osmolarities and mc_transepithelial_volume_flux for
    vars Osm_c and Osm_c;
    vars Osm_m and Osm_m;
  enddef;
enddef;
