// comment: FN Geoff Nunns; This model is known to run in JSIM to recreate the published results. It was created by Alberto Corrias and taken from the NUS Computational Bioengineering Laboratory website.
// creator: albertocorrias@nus.edu.sg; Given Alberto; Family Corrias; Orgname National University of Singapore; Orgunit Division of BioEngineering
// created: W3CDTF 2008-03-01T00:00:00+00:00
// publisher: National University of Singapore
// comment: FN Geoff Nunns; This model is known to run in JSIM to recreate the published results. It was created by Alberto Corrias and taken from the NUS Computational Bioengineering Laboratory website.
// simulation: #simulation; iterationMethod newton; multistepMethod bdf; simulationName Control ICC simulation; tabulationStepSize 0.1; endingValue 30; startingValue 0.0; maximumStepSize 0.01; #time; http://www.w3.org/2002/07/owl#Nothing; linearSolver dense
// reference: Pubmed_id 18276830; Given Alberto; Family Corrias; Given Martin; Family Buist; Other L; title Am J Physiol Gastrointest Liver Physiol; title Quantitative cellular description of gastric slow wave activity; last_page G995; volume 294; first_page G989; W3CDTF 2008
// reference: _1 electrophysiology; _2 gastric; _3 ICC; subject_type keyword
// graph: #membrane_potential_graph; colour #ffffff; label Membrane potential (mV); label Time (s); http://www.cellml.org/metadata/graphs/1.0#line; #simulation; #time; #simulation; #Vm; colour #ff0000; type 1; http://www.w3.org/2002/07/owl#Nothing
def model ICC_model as
  // Quantitative cellular description of gastric slow wave activity
  //
  // Alberto Corrias
  //
  // National University of Singapore
  //
  // Model Status
  //
  // This model is known to run in JSIM, COR and OpenCell to recreate the published results. The units have been checked and they are consistent. The CellML model was created by Alberto Corrias and taken from the NUS Computational Bioengineering Laboratory website.
  //
  // Model Structure
  //
  // Abstract: Interstitial cells of Cajal (ICC) are responsible for the spontaneous and omnipresent electrical activity in the stomach. A quantitative description of the intracellular processes whose coordinated activity is believed to generate electrical slow waves has been developed and is presented here. In line with recent experimental evidence, the model describes how the interplay between the mitochondria and the endoplasmic reticulum in cycling intracellular Ca2+ provides the primary regulatory signal for the initiation of the slow wave. The major ion channels that have been identified as influencing slow wave activity have been modeled according to data obtained from isolated ICC. The model has been validated by comparing the simulated profile of the slow waves with experimental recordings and shows good correspondence in terms of frequency, amplitude, and shape in both control and pharmacologically altered conditions.
  //
  // The complete original paper reference is cited below:
  //
  // Quantitative cellular description of gastric slow wave activity, Alberto Corrias, Martin L. Buist 2008, Am J Physiol Gastrointest Liver Physiol , 294, G989-G995. PubMed ID: 18276830 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=18276830 &dopt=Abstract)
  //
  // The documented original is available at the National University of Singapore's Computational Bioengineering Laboratory website (http://www.bioeng.nus.edu.sg/compbiolab/projects/gi-project.html#icc-cell-ephys).
  //
  // Corrias 2008 diagram
  //
  // Schematic view of the model. The intracellular space is divided in four compartments: cytoplasm, mitochondria, endoplasmic reticulum (ER), and submembrane space (SS). All membrane ion channels and transport mechanisms included in the model are depicted.
  def unit conductance_units as
    unit siemens {pref: nano};
  enddef;
  def unit millifarads as
    unit farad {pref: milli};
  enddef;
  def unit voltage_units as
    unit volt {pref: milli};
  enddef;
  def unit volume_units as
    unit litre;
  enddef;
  def unit Inverse_Voltage_units as
    unit voltage_units {expo: -1};
  enddef;
  def unit Inverse_Voltage_Units_per_time_units as
    unit Inverse_Voltage_units;
    unit time_units {expo: -1};
  enddef;
  def unit time_units as
    unit second;
  enddef;
  def unit current_units as
    unit voltage_units;
    unit conductance_units;
  enddef;
  def unit rate_constants_units as
    unit time_units {expo: -1};
  enddef;
  def unit capacitance_units as
    unit farad {pref: nano};
  enddef;
  def unit Temperature_units as
    unit kelvin;
  enddef;
  def unit Inverse_Temperature_units_times_conductance as
    unit Temperature_units {expo: -1};
    unit conductance_units;
  enddef;
  def unit F_units as
    unit mole {expo: -1, pref: nano};
    unit coulomb {pref: micro};
  enddef;
  def unit R_units as
    unit joule {pref: nano};
    unit mole {expo: -1, pref: nano};
    unit kelvin {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit litre;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimolar_per_second as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_second_per_millivolt as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {expo: -1};
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit millimole_to_nanomole as
    unit mole {pref: nano};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit microcoulomb_to_picocoulomb as
    unit coulomb {pref: pico};
    unit coulomb {expo: -1, pref: micro};
  enddef;

  def comp Time as
    var time: time_units {priv: out, pub: out};
  enddef;

  def comp Environment as
    var T: Temperature_units {init: 310, priv: out};
    var T_exp: Temperature_units {init: 297, priv: out};
    var F: F_units {init: 96.4846, priv: out, pub: out};
    var R: R_units {init: 8.3144, priv: out};
    var Q10Ca: dimensionless {init: 2.1, priv: out};
    var Q10K: dimensionless {init: 1.5, priv: out};
    var Q10Na: dimensionless {init: 2.45, priv: out};
    var Ca_o: millimolar {init: 2.5, priv: out, pub: out};
    var Na_o: millimolar {init: 137, priv: out, pub: out};
    var K_o: millimolar {init: 7, priv: out, pub: out};
    var Cl_o: millimolar {init: 134, priv: out, pub: out};
    var T_correction_Na: dimensionless {priv: out, pub: out};
    var T_correction_K: dimensionless {priv: out, pub: out};
    var T_correction_Ca: dimensionless {priv: out, pub: out};
    var T_correction_BK: conductance_units {priv: out, pub: out};
    var FoRT: Inverse_Voltage_units {priv: out, pub: out};
    var RToF: voltage_units {priv: out, pub: out};
    FoRT = F/(R*T);
    RToF = R*T/F;
    T_correction_Ca = pow(Q10Ca, (T-T_exp)/10{Temperature_units});
    T_correction_K = pow(Q10K, (T-T_exp)/10{Temperature_units});
    T_correction_Na = pow(Q10Na, (T-T_exp)/10{Temperature_units});
    T_correction_BK = 1.1{Inverse_Temperature_units_times_conductance}*(T-T_exp);
  enddef;

  def comp ICC_Membrane as
    var Cm: capacitance_units {init: 0.025};
    var Vol: volume_units {init: 1e-12, priv: out, pub: out};
    var P_cyto: dimensionless {init: 0.7, priv: out, pub: out};
    var V_cyto: volume_units {priv: out};
    var fc: dimensionless {init: 0.01, priv: out};
    var Vm: voltage_units {init: -67, priv: out};
    var time: time_units {priv: out, pub: in};
    var Ca_i: millimolar {init: 0.00000993087, priv: out, pub: out};
    var Na_i: millimolar {init: 30, priv: out, pub: out};
    var K_i: millimolar {init: 120, priv: out};
    var Cl_i: millimolar {init: 88, priv: out};
    var Ca_o: millimolar {priv: out, pub: in};
    var Na_o: millimolar {priv: out, pub: in};
    var K_o: millimolar {priv: out, pub: in};
    var Cl_o: millimolar {priv: out, pub: in};
    var T_correction_Ca: dimensionless {priv: out, pub: in};
    var T_correction_Na: dimensionless {priv: out, pub: in};
    var T_correction_K: dimensionless {priv: out, pub: in};
    var T_correction_BK: conductance_units {priv: out, pub: in};
    var RToF: voltage_units {priv: out, pub: in};
    var FoRT: Inverse_Voltage_units {priv: out, pub: in};
    var F: F_units {priv: out, pub: in};
    var J_leak: millimolar_per_second {priv: in};
    var I_Na: current_units {priv: in};
    var I_Ltype: current_units {priv: in};
    var I_VDDR: current_units {priv: in};
    var I_kv11: current_units {priv: in};
    var I_BK: current_units {priv: in};
    var I_ERG: current_units {priv: in};
    var I_CaCl: current_units {priv: in};
    var I_NSCC: current_units {priv: in};
    var I_bk: current_units {priv: in};
    var J_PMCA: millimolar_per_second {priv: in};
    V_cyto = Vol*P_cyto;
    ode(Vm, time) = -1{dimensionless}*1{dimensionless}/Cm*(I_Na+I_Ltype+I_VDDR+I_kv11+I_ERG+I_BK+I_CaCl+I_NSCC+I_bk+J_PMCA*2{dimensionless}*1000000{millimole_to_nanomole}*1000000{microcoulomb_to_picocoulomb}*F*V_cyto);
    ode(Ca_i, time) = fc*((-1{dimensionless}*I_Ltype+(-1{dimensionless}*I_VDDR))/(2{dimensionless}*1000000{millimole_to_nanomole}*1000000{microcoulomb_to_picocoulomb}*F*V_cyto)+J_leak+(-1{dimensionless}*J_PMCA));
  enddef;

  def comp d_Ltype as
    var Vm: voltage_units {pub: in};
    var d_inf_Ltype: dimensionless;
    var tau_d_Ltype: time_units;
    var d_Ltype: dimensionless {init: 0, pub: out};
    var time: time_units {pub: in};
    var T_correction_Ca: dimensionless {pub: in};
    d_inf_Ltype = 1{dimensionless}/(1{dimensionless}+exp((Vm+17{voltage_units})/(-4.3{voltage_units})));
    tau_d_Ltype = T_correction_Ca*0.001{time_units};
    ode(d_Ltype, time) = (d_inf_Ltype-d_Ltype)/tau_d_Ltype;
  enddef;

  def comp f_Ltype as
    var Vm: voltage_units {pub: in};
    var f_inf_Ltype: dimensionless;
    var tau_f_Ltype: time_units;
    var f_Ltype: dimensionless {init: 1, pub: out};
    var time: time_units {pub: in};
    var T_correction_Ca: dimensionless {pub: in};
    f_inf_Ltype = 1{dimensionless}/(1{dimensionless}+exp((Vm+43{voltage_units})/8.9{voltage_units}));
    tau_f_Ltype = T_correction_Ca*0.086{time_units};
    ode(f_Ltype, time) = (f_inf_Ltype-f_Ltype)/tau_f_Ltype;
  enddef;

  def comp f_ca_Ltype as
    var Ca_i: millimolar {pub: in};
    var f_ca_inf_Ltype: dimensionless;
    var tau_f_ca_Ltype: time_units;
    var f_ca_Ltype: dimensionless {init: 1, pub: out};
    var time: time_units {pub: in};
    var T_correction_Ca: dimensionless {pub: in};
    f_ca_inf_Ltype = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp((Ca_i-0.0001{millimolar}-0.000214{millimolar})/(-0.0000131{millimolar})));
    tau_f_ca_Ltype = T_correction_Ca*0.002{time_units};
    ode(f_ca_Ltype, time) = (f_ca_inf_Ltype-f_ca_Ltype)/tau_f_ca_Ltype;
  enddef;

  def comp I_Ltype as
    var I_Ltype: current_units {pub: out};
    var E_Ca: voltage_units;
    var G_max_Ltype: conductance_units {init: 2};
    var Vm: voltage_units {priv: out, pub: in};
    var f_Ltype: dimensionless {priv: in};
    var d_Ltype: dimensionless {priv: in};
    var f_ca_Ltype: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {priv: out, pub: in};
    var T_correction_Ca: dimensionless {priv: out, pub: in};
    var time: time_units {priv: out, pub: in};
    E_Ca = 0.5{dimensionless}*RToF*ln(Ca_o/Ca_i);
    I_Ltype = G_max_Ltype*f_Ltype*d_Ltype*f_ca_Ltype*(Vm-E_Ca);
  enddef;

  def comp J_PMCA as
    var J_PMCA: millimolar_per_second {pub: out};
    var J_max_PMCA: millimolar_per_second {init: 0.088464};
    var Ca_i: millimolar {pub: in};
    J_PMCA = J_max_PMCA*1{dimensionless}/(1{dimensionless}+0.000298{millimolar}/Ca_i);
  enddef;

  def comp d_VDDR as
    var Vm: voltage_units {pub: in};
    var d_inf_VDDR: dimensionless;
    var tau_d_VDDR: time_units;
    var d_VDDR: dimensionless {init: 0, pub: out};
    var time: time_units {pub: in};
    var T_correction_Ca: dimensionless {pub: in};
    d_inf_VDDR = 1{dimensionless}/(1{dimensionless}+exp((Vm+26{voltage_units})/(-6{voltage_units})));
    tau_d_VDDR = T_correction_Ca*0.006{time_units};
    ode(d_VDDR, time) = (d_inf_VDDR-d_VDDR)/tau_d_VDDR;
  enddef;

  def comp f_VDDR as
    var Vm: voltage_units {pub: in};
    var f_inf_VDDR: dimensionless;
    var tau_f_VDDR: time_units;
    var f_VDDR: dimensionless {init: 1, pub: out};
    var time: time_units {pub: in};
    var T_correction_Ca: dimensionless {pub: in};
    f_inf_VDDR = 1{dimensionless}/(1{dimensionless}+exp((Vm+66{voltage_units})/6{voltage_units}));
    tau_f_VDDR = T_correction_Ca*0.04{time_units};
    ode(f_VDDR, time) = (f_inf_VDDR-f_VDDR)/tau_f_VDDR;
  enddef;

  def comp I_VDDR as
    var I_VDDR: current_units {pub: out};
    var E_Ca: voltage_units;
    var G_max_VDDR: conductance_units {init: 3};
    var Vm: voltage_units {priv: out, pub: in};
    var f_VDDR: dimensionless {priv: in};
    var d_VDDR: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var T_correction_Ca: dimensionless {priv: out, pub: in};
    var time: time_units {priv: out, pub: in};
    E_Ca = 0.5{dimensionless}*RToF*ln(Ca_o/Ca_i);
    I_VDDR = G_max_VDDR*f_VDDR*d_VDDR*(Vm-E_Ca);
  enddef;

  def comp d_CaCl as
    var Ca_i: millimolar {pub: in};
    var d_inf_CaCl: dimensionless;
    var tau_d_CaCl: time_units {init: 0.03};
    var d_CaCl: dimensionless {init: 0, pub: out};
    var time: time_units {pub: in};
    d_inf_CaCl = 1{dimensionless}/(1{dimensionless}+pow(0.00014{millimolar}/Ca_i, 3{dimensionless}));
    ode(d_CaCl, time) = (d_inf_CaCl-d_CaCl)/tau_d_CaCl;
  enddef;

  def comp I_CaCl as
    var I_CaCl: current_units {pub: out};
    var Ca_i: millimolar {priv: out, pub: in};
    var E_Cl: voltage_units;
    var G_max_CaCl: conductance_units {init: 10.1};
    var Vm: voltage_units {pub: in};
    var d_CaCl: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var Cl_o: millimolar {pub: in};
    var Cl_i: millimolar {pub: in};
    var time: time_units {priv: out, pub: in};
    E_Cl = RToF*ln(Cl_i/Cl_o);
    I_CaCl = G_max_CaCl*d_CaCl*(Vm-E_Cl);
  enddef;

  def comp d_BK as
    var Vm: voltage_units {pub: in};
    var Ca_i: millimolar {pub: in};
    var d_BK: dimensionless {pub: out};
    var time: time_units {pub: in};
    d_BK = 1{dimensionless}/(1{dimensionless}+exp(Vm/(-17{voltage_units})-2{dimensionless}*ln(Ca_i/0.001{millimolar})));
  enddef;

  def comp I_BK as
    var I_BK: current_units {pub: out};
    var Ca_i: millimolar {priv: out, pub: in};
    var E_K: voltage_units;
    var G_max_BK: conductance_units {init: 23};
    var Vm: voltage_units {priv: out, pub: in};
    var d_BK: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var T_correction_BK: conductance_units {pub: in};
    var time: time_units {priv: out, pub: in};
    E_K = RToF*ln(K_o/K_i);
    I_BK = (G_max_BK+T_correction_BK)*d_BK*(Vm-E_K);
  enddef;

  def comp I_bk as
    var I_bk: current_units {pub: out};
    var E_K: voltage_units;
    var G_max_bk: conductance_units {init: 0.15};
    var Vm: voltage_units {pub: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    E_K = RToF*ln(K_o/K_i);
    I_bk = G_max_bk*(Vm-E_K);
  enddef;

  def comp d_ERG as
    var Vm: voltage_units {pub: in};
    var d_inf_ERG: dimensionless;
    var tau_d_ERG: time_units;
    var d_ERG: dimensionless {init: 0, pub: out};
    var time: time_units {pub: in};
    var T_correction_K: dimensionless {pub: in};
    d_inf_ERG = 0.2{dimensionless}+0.8{dimensionless}/(1{dimensionless}+exp((Vm+20{voltage_units})/(-1.8{voltage_units})));
    tau_d_ERG = T_correction_K*0.003{time_units};
    ode(d_ERG, time) = (d_inf_ERG-d_ERG)/tau_d_ERG;
  enddef;

  def comp I_ERG as
    var I_ERG: current_units {pub: out};
    var E_K: voltage_units;
    var G_max_ERG: conductance_units {init: 2.5};
    var Vm: voltage_units {priv: out, pub: in};
    var d_ERG: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var T_correction_K: dimensionless {priv: out, pub: in};
    var time: time_units {priv: out, pub: in};
    E_K = RToF*ln(K_o/K_i);
    I_ERG = G_max_ERG*d_ERG*(Vm-E_K);
  enddef;

  def comp d_kv11 as
    var Vm: voltage_units {pub: in};
    var d_inf_kv11: dimensionless;
    var tau_d_kv11: time_units;
    var d_kv11: dimensionless {init: 0, pub: out};
    var time: time_units {pub: in};
    var T_correction_K: dimensionless {pub: in};
    d_inf_kv11 = 1{dimensionless}/(1{dimensionless}+exp((Vm+25{voltage_units})/(-7.7{voltage_units})));
    tau_d_kv11 = T_correction_K*0.005{time_units};
    ode(d_kv11, time) = (d_inf_kv11-d_kv11)/tau_d_kv11;
  enddef;

  def comp f_kv11 as
    var Vm: voltage_units {pub: in};
    var f_inf_kv11: dimensionless;
    var tau_f_kv11: time_units;
    var f_kv11: dimensionless {init: 1, pub: out};
    var time: time_units {pub: in};
    var T_correction_K: dimensionless {pub: in};
    f_inf_kv11 = 0.5{dimensionless}+0.5{dimensionless}/(1{dimensionless}+exp((Vm+44.8{voltage_units})/4.4{voltage_units}));
    tau_f_kv11 = T_correction_K*0.005{time_units};
    ode(f_kv11, time) = (f_inf_kv11-f_kv11)/tau_f_kv11;
  enddef;

  def comp I_kv11 as
    var I_kv11: current_units {pub: out};
    var E_K: voltage_units;
    var G_max_kv11: conductance_units {init: 6.3};
    var Vm: voltage_units {priv: out, pub: in};
    var f_kv11: dimensionless {priv: in};
    var d_kv11: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var T_correction_K: dimensionless {priv: out, pub: in};
    var time: time_units {priv: out, pub: in};
    E_K = RToF*ln(K_o/K_i);
    I_kv11 = G_max_kv11*f_kv11*d_kv11*(Vm-E_K);
  enddef;

  def comp d_Na as
    var Vm: voltage_units {pub: in};
    var d_inf_Na: dimensionless;
    var tau_d_Na: time_units;
    var d_Na: dimensionless {init: 0, pub: out};
    var time: time_units {pub: in};
    var T_correction_Na: dimensionless {pub: in};
    d_inf_Na = 1{dimensionless}/(1{dimensionless}+exp((Vm+47{voltage_units})/(-4.8{voltage_units})));
    tau_d_Na = T_correction_Na*0.003{time_units};
    ode(d_Na, time) = (d_inf_Na-d_Na)/tau_d_Na;
  enddef;

  def comp f_Na as
    var Vm: voltage_units {pub: in};
    var f_inf_Na: dimensionless;
    var tau_f_Na: time_units;
    var f_Na: dimensionless {init: 1, pub: out};
    var time: time_units {pub: in};
    var T_correction_Na: dimensionless {pub: in};
    f_inf_Na = 1{dimensionless}/(1{dimensionless}+exp((Vm+78{voltage_units})/7{voltage_units}));
    tau_f_Na = T_correction_Na*0.0016{time_units};
    ode(f_Na, time) = (f_inf_Na-f_Na)/tau_f_Na;
  enddef;

  def comp I_Na as
    var I_Na: current_units {pub: out};
    var E_Na: voltage_units;
    var G_max_Na: conductance_units {init: 20};
    var Vm: voltage_units {priv: out, pub: in};
    var f_Na: dimensionless {priv: in};
    var d_Na: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var T_correction_Na: dimensionless {priv: out, pub: in};
    var time: time_units {priv: out, pub: in};
    E_Na = RToF*ln(Na_o/Na_i);
    I_Na = G_max_Na*f_Na*d_Na*(Vm-E_Na);
  enddef;

  def comp d_NSCC as
    var Ca_PU: millimolar {pub: in};
    var d_inf_NSCC: dimensionless;
    var tau_d_NSCC: time_units {init: 0.35};
    var d_NSCC: dimensionless {init: 0, pub: out};
    var time: time_units {pub: in};
    d_inf_NSCC = 1{dimensionless}/(1{dimensionless}+pow(0.0000745{millimolar}/Ca_PU, -85{dimensionless}));
    ode(d_NSCC, time) = (d_inf_NSCC-d_NSCC)/tau_d_NSCC;
  enddef;

  def comp I_NSCC as
    var I_NSCC: current_units {pub: out};
    var E_NSCC: voltage_units;
    var G_max_NSCC: conductance_units {init: 12.15};
    var Vm: voltage_units {pub: in};
    var d_NSCC: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var NaPerm_o_Kperm: dimensionless {init: 1.056075};
    var Ca_PU: millimolar {priv: out, pub: in};
    var time: time_units {priv: out, pub: in};
    E_NSCC = RToF*ln((K_o+Na_o*NaPerm_o_Kperm)/(K_i+Na_i*NaPerm_o_Kperm));
    I_NSCC = G_max_NSCC*d_NSCC*(Vm-E_NSCC);
  enddef;

  def comp PU_unit as
    var Vol: volume_units {pub: in};
    var P_PU: dimensionless {init: 0.001};
    var P_mito: dimensionless {init: 0.12871};
    var P_ER: dimensionless {init: 0.1};
    var V_MITO: volume_units;
    var V_ER: volume_units;
    var V_PU: volume_units;
    var fe: dimensionless {init: 0.01};
    var fm: dimensionless {init: 0.0003};
    var time: time_units {pub: in};
    var fc: dimensionless {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var V_cyto: volume_units {pub: in};
    var FoRT: Inverse_Voltage_units {pub: in};
    var RToF: voltage_units {pub: in};
    var Ca_PU: millimolar {init: 0.0000902, priv: out, pub: out};
    var F: F_units {pub: in};
    var Ca_m: millimolar {init: 0.000136};
    var Ca_ER: millimolar {init: 0.007299};
    var ADP_m: millimolar {init: 2.60093454};
    var ADP_i: millimolar {init: 0.0077282};
    var NADH_m: millimolar {init: 0.101476};
    var h: dimensionless {init: 0.9397};
    var IP3: millimolar {init: 0.0006};
    var deltaPsi: voltage_units {init: 164.000044};
    var deltapH: dimensionless {init: -0.4};
    var Cmito: millifarads {init: 0.006995};
    var K_res: dimensionless {init: 1.35e18};
    var r1: dimensionless {init: 2.077e-18};
    var r2: dimensionless {init: 1.728e-9};
    var r3: dimensionless {init: 1.059e-26};
    var ra: rate_constants_units {init: 6.394e-10};
    var rb: rate_constants_units {init: 1.762e-13};
    var rc1: rate_constants_units {init: 2.656e-19};
    var rc2: rate_constants_units {init: 8.632e-27};
    var deltaPsi_B: voltage_units {init: 50};
    var g: dimensionless {init: 0.85};
    var K_F1: millimolar {init: 1.71e9};
    var Pi_m: millimolar {init: 20};
    var p1: dimensionless {init: 1.346e-8};
    var p2: dimensionless {init: 7.739e-7};
    var p3: dimensionless {init: 6.65e-15};
    var pa: rate_constants_units {init: 1.656e-5};
    var pb: rate_constants_units {init: 3.373e-7};
    var pc1: rate_constants_units {init: 9.651e-14};
    var pc2: rate_constants_units {init: 4.845e-19};
    var frac: dimensionless {init: 0.5};
    var K_act: millimolar {init: 0.00038};
    var na: dimensionless {init: 2.8};
    var deltaPsi_star: voltage_units {init: 91};
    var K_Na: millimolar {init: 9.4};
    var K_Ca: millimolar {init: 0.003};
    var K_trans: millimolar {init: 0.006};
    var L: dimensionless {init: 50};
    var b: dimensionless {init: 0.5};
    var beta_max: rate_constants_units {init: 2.055};
    var beta1: per_millimolar {init: 1.66};
    var beta2: per_millimolar {init: 0.0249};
    var beta3: per_millimolar {init: 4};
    var beta4: per_millimolar {init: 2.83};
    var beta5: per_millimolar {init: 1.3};
    var beta6: per_millimolar {init: 2.66};
    var beta7: per_millimolar {init: 0.16};
    var KCa_PDH: millimolar {init: 0.00005};
    var u1: dimensionless {init: 15};
    var u2: dimensionless {init: 1.1};
    var n: dimensionless {init: 2};
    var K_Glc: millimolar {init: 8.7};
    var nhyd: dimensionless {init: 2.7};
    var K_hyd: rate_constants_units {init: 0.05125};
    var J_ERleak: rate_constants_units {init: 1.666667};
    var Jmax_IP3: rate_constants_units {init: 50000};
    var d_IP3: millimolar {init: 0.00025};
    var d_ACT: millimolar {init: 0.001};
    var d_INH: millimolar {init: 0.0014};
    var tauh: time_units {init: 4};
    var Jmax_serca: millimolar_per_second {init: 1.8333};
    var k_serca: millimolar {init: 0.00042};
    var conc: millimolar {init: 0.001};
    var Jmax_uni: rate_constants_units {init: 5000};
    var Jmax_NaCa: millimolar_per_second {init: 0.05};
    var J_max_leak: rate_constants_units {init: 0.01};
    var rho_res: millimolar {init: 0.4};
    var rho_F1: millimolar {init: 0.7};
    var g_H: millimolar_per_second_per_millivolt {init: 0.0033333};
    var J_red_basal: millimolar_per_second {init: 0.3333};
    var Jmax_ANT: millimolar_per_second {init: 15};
    var J_hyd_max: millimolar_per_second {init: 0.037625};
    var Glc: millimolar {init: 1};
    var total_NAD_m: millimolar {init: 8};
    var total_ANP_m: millimolar {init: 12};
    var total_ANP_i: millimolar {init: 2};
    var NAD_m: millimolar;
    var ATP_m: millimolar;
    var ADP_mfree: millimolar;
    var ADP3_m: millimolar;
    var ATP4_m: millimolar;
    var ATP_i: millimolar;
    var ADP_ifree: millimolar;
    var ADP3_i: millimolar;
    var MgADP_i: millimolar;
    var ATP4_i: millimolar;
    var J_ERout: millimolar_per_second;
    var J_SERCA: millimolar_per_second;
    var MWC: millimolar;
    var J_uni: millimolar_per_second;
    var J_NaCa: millimolar_per_second;
    var J_leak: millimolar_per_second {pub: out};
    var J_red: millimolar_per_second;
    var J_pTCA: millimolar_per_second;
    var A_F1: voltage_units;
    var J_pF1: millimolar_per_second;
    var J_HF1: millimolar_per_second;
    var A_res: voltage_units;
    var J_o: millimolar_per_second;
    var J_glyTotal: millimolar_per_second;
    var f_PDHa: dimensionless;
    var J_Hres: millimolar_per_second;
    var J_ANT: millimolar_per_second;
    var PMF: voltage_units;
    var J_Hleak: millimolar_per_second;
    var J_pGly: millimolar_per_second;
    var J_hydSS: millimolar_per_second;
    var J_hyd: millimolar_per_second;
    V_MITO = Vol*P_mito;
    V_PU = Vol*P_PU;
    V_ER = Vol*P_ER;
    J_ERout = (Jmax_IP3*pow(IP3/(IP3+d_IP3), 3{dimensionless})*pow(Ca_PU/(Ca_PU+d_ACT), 3{dimensionless})*pow(h, 3{dimensionless})+J_ERleak)*(Ca_ER-Ca_PU);
    J_SERCA = Jmax_serca*sqr(Ca_PU)/(sqr(k_serca)+sqr(Ca_PU));
    MWC = conc*Ca_PU/K_trans*pow(1{dimensionless}+Ca_PU/K_trans, 3{dimensionless})/(pow(1{dimensionless}+Ca_PU/K_trans, 4{dimensionless})+L/pow(1{dimensionless}+Ca_PU/K_act, na));
    J_uni = Jmax_uni*(MWC-Ca_m*exp(-2{dimensionless}*FoRT*(deltaPsi-deltaPsi_star)))*2{dimensionless}*FoRT*(deltaPsi-deltaPsi_star)/(1{dimensionless}-exp(-2{dimensionless}*FoRT*(deltaPsi-deltaPsi_star)));
    J_NaCa = Jmax_NaCa*exp(b*FoRT*(deltaPsi-deltaPsi_star))/((1{dimensionless}+pow(K_Na/Na_i, n))*(1{dimensionless}+K_Ca/Ca_m));
    J_leak = J_max_leak*(Ca_PU-Ca_i);
    A_res = RToF*ln(K_res*sqrt(NADH_m)/sqrt(NAD_m));
    J_o = rho_res*0.5{dimensionless}*((ra*pow(10{dimensionless}, 6{dimensionless}*deltapH)+rc1*exp(6{dimensionless}*deltaPsi_B*FoRT))*exp(A_res*FoRT)+(-1{dimensionless}*ra*exp(g*6{dimensionless}*FoRT*deltaPsi))+rc2*exp(FoRT*A_res)*exp(FoRT*deltaPsi*6{dimensionless}*g))/((1{dimensionless}+r1*exp(FoRT*A_res))*exp(FoRT*deltaPsi_B*6{dimensionless})+(r2+r3*exp(FoRT*A_res))*exp(FoRT*deltaPsi*g*6{dimensionless}));
    J_Hres = rho_res*3.966{dimensionless}*(ra*pow(10{dimensionless}, 6{dimensionless}*deltapH)*exp(FoRT*A_res)+rb*pow(10{dimensionless}, 6{dimensionless}*deltapH)+(-1{dimensionless}*(ra+rb)*exp(g*FoRT*deltaPsi*6{dimensionless})))/((1{dimensionless}+r1*exp(FoRT*A_res))*exp(6{dimensionless}*FoRT*deltaPsi_B)+(r2+r3*exp(FoRT*A_res))*exp(g*6{dimensionless}*FoRT*deltaPsi));
    J_glyTotal = beta_max*(1{dimensionless}+beta1*Glc)*beta2*Glc*ATP_i/(1{dimensionless}+beta3*ATP_i+(1{dimensionless}+beta4*ATP_i)*beta5*Glc+(1{dimensionless}+beta6*ATP_i)*beta7*Glc);
    f_PDHa = 1{dimensionless}/(1{dimensionless}+u2*(1{dimensionless}+u1/sqr(1{dimensionless}+Ca_m/KCa_PDH)));
    J_red = J_red_basal+6.3944{dimensionless}*f_PDHa*J_glyTotal;
    J_pTCA = J_red_basal/3{dimensionless}+0.84{dimensionless}*f_PDHa*J_glyTotal;
    A_F1 = RToF*ln(K_F1*ATP_m/(ADP_mfree*Pi_m));
    J_pF1 = rho_F1*(-1{dimensionless})*((pa*pow(10{dimensionless}, 3{dimensionless}*deltapH)+pc1*exp(3{dimensionless}*FoRT*deltaPsi_B))*exp(FoRT*A_F1)+(-1{dimensionless}*pa*exp(3{dimensionless}*FoRT*deltaPsi))+pc2*exp(FoRT*A_F1)*exp(3{dimensionless}*FoRT*deltaPsi))/((1{dimensionless}+p1*exp(FoRT*A_F1))*exp(3{dimensionless}*FoRT*deltaPsi_B)+(p2+p3*exp(FoRT*A_F1))*exp(3{dimensionless}*FoRT*deltaPsi));
    J_HF1 = -1{dimensionless}*rho_F1*3{dimensionless}*(pa*pow(10{dimensionless}, 3{dimensionless}*deltapH)*exp(FoRT*A_F1)+pb*pow(10{dimensionless}, 3{dimensionless}*deltapH)+(-1{dimensionless}*(pa+pb)*exp(3{dimensionless}*FoRT*deltaPsi)))/((1{dimensionless}+p1*exp(FoRT*A_F1))*exp(3{dimensionless}*FoRT*deltaPsi_B)+(p2+p3*exp(FoRT*A_F1))*exp(3{dimensionless}*FoRT*deltaPsi));
    J_ANT = Jmax_ANT*(1{dimensionless}-ATP4_i*ADP3_m/(ADP3_i*ATP4_m)*exp(-1{dimensionless}*FoRT*deltaPsi))/((1{dimensionless}+ATP4_i/ADP3_i*exp(-1{dimensionless}*frac*FoRT*deltaPsi))*(1{dimensionless}+ADP3_m/ATP4_m));
    PMF = deltaPsi-2.303{dimensionless}*RToF*deltapH;
    J_Hleak = g_H*PMF;
    J_pGly = 0.15{dimensionless}*J_glyTotal;
    J_hydSS = J_hyd_max/(1{dimensionless}+pow(K_Glc/Glc, nhyd));
    J_hyd = K_hyd*ATP_i+J_hydSS;
    ode(NADH_m, time) = J_red-J_o;
    NAD_m = total_NAD_m-NADH_m;
    ode(ADP_m, time) = J_ANT+(-1{dimensionless}*J_pTCA)+(-1{dimensionless}*J_pF1);
    ATP_m = total_ANP_m-ADP_m;
    ADP_mfree = 0.8{dimensionless}*ADP_m;
    ADP3_m = 0.45{dimensionless}*ADP_mfree;
    ATP4_m = 0.05{dimensionless}*ATP_m;
    ode(ADP_i, time) = -1{dimensionless}*J_ANT*V_MITO/V_cyto+J_hyd+(-1{dimensionless}*J_pGly);
    ATP_i = total_ANP_i-ADP_i;
    ADP_ifree = 0.3{dimensionless}*ADP_i;
    ADP3_i = 0.45{dimensionless}*ADP_ifree;
    MgADP_i = 0.55{dimensionless}*ADP_ifree;
    ATP4_i = 0.05{dimensionless}*ATP_i;
    ode(Ca_PU, time) = fc*((J_NaCa-J_uni)*V_MITO/V_PU+(J_ERout-J_SERCA)*V_ER/V_PU+(-1{dimensionless}*J_leak*V_cyto/V_PU));
    ode(Ca_m, time) = fm*(J_uni-J_NaCa);
    ode(Ca_ER, time) = fe*(J_SERCA-J_ERout);
    ode(deltaPsi, time) = -1{dimensionless}*F*V_MITO*1000000{millimole_to_nanomole}*1{dimensionless}/Cmito*(J_Hleak+(-1{dimensionless}*J_Hres)+J_ANT+J_HF1+2{dimensionless}*J_uni);
    ode(h, time) = 1{per_millimolar}*(d_INH-h*(Ca_PU+d_INH))/tauh;
  enddef;

  def group as encapsulation for
    comp ICC_Membrane incl
      comp I_Na incl
        comp d_Na;
        comp f_Na;
      endcomp;
      comp I_Ltype incl
        comp d_Ltype;
        comp f_Ltype;
        comp f_ca_Ltype;
      endcomp;
      comp I_VDDR incl
        comp d_VDDR;
        comp f_VDDR;
      endcomp;
      comp I_BK incl
        comp d_BK;
      endcomp;
      comp I_CaCl incl
        comp d_CaCl;
      endcomp;
      comp I_kv11 incl
        comp d_kv11;
        comp f_kv11;
      endcomp;
      comp I_ERG incl
        comp d_ERG;
      endcomp;
      comp I_bk;
      comp I_NSCC incl
        comp d_NSCC;
      endcomp;
      comp J_PMCA;
      comp PU_unit;
    endcomp;
  enddef;
  def map between d_Na and I_Na for
    vars Vm and Vm;
    vars d_Na and d_Na;
    vars time and time;
    vars T_correction_Na and T_correction_Na;
  enddef;
  def map between f_Na and I_Na for
    vars Vm and Vm;
    vars f_Na and f_Na;
    vars time and time;
    vars T_correction_Na and T_correction_Na;
  enddef;
  def map between I_Na and ICC_Membrane for
    vars Na_i and Na_i;
    vars Vm and Vm;
    vars I_Na and I_Na;
    vars time and time;
    vars RToF and RToF;
    vars Na_o and Na_o;
    vars T_correction_Na and T_correction_Na;
  enddef;
  def map between d_Ltype and I_Ltype for
    vars Vm and Vm;
    vars d_Ltype and d_Ltype;
    vars time and time;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between f_Ltype and I_Ltype for
    vars Vm and Vm;
    vars f_Ltype and f_Ltype;
    vars time and time;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between f_ca_Ltype and I_Ltype for
    vars f_ca_Ltype and f_ca_Ltype;
    vars Ca_i and Ca_i;
    vars time and time;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between I_Ltype and ICC_Membrane for
    vars Ca_i and Ca_i;
    vars Vm and Vm;
    vars I_Ltype and I_Ltype;
    vars time and time;
    vars RToF and RToF;
    vars Ca_o and Ca_o;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between d_VDDR and I_VDDR for
    vars Vm and Vm;
    vars d_VDDR and d_VDDR;
    vars time and time;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between f_VDDR and I_VDDR for
    vars Vm and Vm;
    vars f_VDDR and f_VDDR;
    vars time and time;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between I_VDDR and ICC_Membrane for
    vars Ca_i and Ca_i;
    vars Vm and Vm;
    vars I_VDDR and I_VDDR;
    vars time and time;
    vars RToF and RToF;
    vars Ca_o and Ca_o;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between d_kv11 and I_kv11 for
    vars Vm and Vm;
    vars d_kv11 and d_kv11;
    vars time and time;
    vars T_correction_K and T_correction_K;
  enddef;
  def map between f_kv11 and I_kv11 for
    vars Vm and Vm;
    vars f_kv11 and f_kv11;
    vars time and time;
    vars T_correction_K and T_correction_K;
  enddef;
  def map between I_kv11 and ICC_Membrane for
    vars K_i and K_i;
    vars Vm and Vm;
    vars I_kv11 and I_kv11;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
    vars T_correction_K and T_correction_K;
  enddef;
  def map between d_ERG and I_ERG for
    vars Vm and Vm;
    vars d_ERG and d_ERG;
    vars time and time;
    vars T_correction_K and T_correction_K;
  enddef;
  def map between I_ERG and ICC_Membrane for
    vars K_i and K_i;
    vars Vm and Vm;
    vars I_ERG and I_ERG;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
    vars T_correction_K and T_correction_K;
  enddef;
  def map between d_CaCl and I_CaCl for
    vars Ca_i and Ca_i;
    vars d_CaCl and d_CaCl;
    vars time and time;
  enddef;
  def map between I_CaCl and ICC_Membrane for
    vars Cl_i and Cl_i;
    vars Ca_i and Ca_i;
    vars Vm and Vm;
    vars I_CaCl and I_CaCl;
    vars time and time;
    vars RToF and RToF;
    vars Cl_o and Cl_o;
  enddef;
  def map between d_BK and I_BK for
    vars Vm and Vm;
    vars Ca_i and Ca_i;
    vars d_BK and d_BK;
    vars time and time;
  enddef;
  def map between I_BK and ICC_Membrane for
    vars K_i and K_i;
    vars Ca_i and Ca_i;
    vars Vm and Vm;
    vars I_BK and I_BK;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
    vars T_correction_BK and T_correction_BK;
  enddef;
  def map between I_bk and ICC_Membrane for
    vars K_i and K_i;
    vars Vm and Vm;
    vars I_bk and I_bk;
    vars RToF and RToF;
    vars K_o and K_o;
  enddef;
  def map between d_NSCC and I_NSCC for
    vars Ca_PU and Ca_PU;
    vars d_NSCC and d_NSCC;
    vars time and time;
  enddef;
  def map between I_NSCC and ICC_Membrane for
    vars K_i and K_i;
    vars Na_i and Na_i;
    vars Vm and Vm;
    vars I_NSCC and I_NSCC;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between PU_unit and I_NSCC for
    vars Ca_PU and Ca_PU;
  enddef;
  def map between PU_unit and ICC_Membrane for
    vars Vol and Vol;
    vars fc and fc;
    vars V_cyto and V_cyto;
    vars FoRT and FoRT;
    vars RToF and RToF;
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
    vars time and time;
    vars J_leak and J_leak;
    vars F and F;
  enddef;
  def map between J_PMCA and ICC_Membrane for
    vars J_PMCA and J_PMCA;
    vars Ca_i and Ca_i;
  enddef;
  def map between ICC_Membrane and Environment for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
    vars K_o and K_o;
    vars Cl_o and Cl_o;
    vars RToF and RToF;
    vars FoRT and FoRT;
    vars F and F;
    vars T_correction_Ca and T_correction_Ca;
    vars T_correction_Na and T_correction_Na;
    vars T_correction_K and T_correction_K;
    vars T_correction_BK and T_correction_BK;
  enddef;
  def map between Time and ICC_Membrane for
    vars time and time;
  enddef;
enddef;
