// This CellML file was generated on 29/10/2007 at 18:25:00 using:
//
// COR (0.9.31.801)
// Copyright 2002-2007 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// publisher: The University of Auckland, Bioengineering Institute
// comment: FN James Lawson; This model has been validated by Penny Noble of Oxford University and is known to run in COR and PCEnv. A PCEnv session file is also associated with this version.
// created: W3CDTF 2003-04-10T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2007-12-19T14:19:43+13:00; added cmeta:id's for some variables to allow referencing by PCEnv; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2007-06-19T15:55:00+12:00; This model has been validated by Penny Noble; Given Penny; Family Noble
// modification: W3CDTF 2007-12-19T14:19:12+13:00; Units checked, curated.; Given Penny; Family Noble; Other J
// modification: W3CDTF 2007-06-19T16:01:50+12:00; cmeta:id's have been added to several variables to allow creation of a PCEnv session file.; Given James; Family Lawson; Other Richard
// created: W3CDTF 2006-01-01
// creator: Orgname unknown; Orgunit unknown; unknown; Given unknown; Family unknown; Other unknown
// simulation: endingValue 2; nonstandard-pointDensity 100000; maximumStepSize 0.1
// title: unknown
// comment: FN Catherine Lloyd; This is the CellML description of Dokos et al's 1996 mathematical model of the ion currents underlying sinoatrial node pacemaker activity. Please note that equations for reversal potentials were not included in the original published model and have had to be added. Also, a current called i_KACh was included in the equations for external and internal potassium ion concentration calculation. This current had not been previously mentioned in the paper, and as i_KACh is usually referred to in ischemic tissue, and also the background potassium current i_bK had not been included in the equation, I am assuming that this was a typo. The model authors have been contacted and we are awaiting their reply.
// reference: Pubmed_id 8869126; Given S; Family Dokos; Given B; Family Celler; Given N; Family Lovell; title Ion currents underlying sinoatrial node pacemaker activity: a new single cell mathematical model; volume 181(3); first_page 245; title Journal of Theroretical Biology; W3CDTF 1996-08-01; last_page 272
// reference: subject_type keyword; cardiac; electrophysiology; Sinoatrial Node; pacemaker; sinoatrial node
def model dokos_1996 as
  // A Single Cell Mathematical Model of the Ion Currents Underlying Sinoatrial Node Pacemaker Activity
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in COR and OpenCell to recreate the published results. The units have been checked and they are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: The ionic currents underlying autorhythmicity of the mammalian sinoatrial node and their wider contribution to each phase of the action potential have been investigated in this study using a new single cell mathematical model. The new model provides a review and update of existing formulations of sinoatrial node membrane currents, derived from a wide range of electrophysiological data available in the literature. Simulations of spontaneous activity suggest that the dominant mechanism underlying pacemaker depolarisation is the inward background Na+ current, ib,Na. In contrast to previous models, the decay of the delayed rectifying K+ current, iK, was insignificant during this phase. Despite the presence of a pseudo-outward background current throughout the pacemaker range of potentials (Na-K pump+leak currents), the hyperpolarisation-activated current i(f) was not essential to pacemaker activity. A closer inspection of the current-voltage characteristics of the model revealed that the "instantaneous" time-independent current was inward for holding potentials in the pacemaker range, which rapidly became outward within 2 ms due to the inactivation of the L-type Ca2+ current, iCa,L. This suggests that reports in the literature in which the net background current is outward throughout the pacemaker range of potentials may be exaggerated. The magnitudes of the action potential overshoot and the maximum diastolic potential were determined largely by the reversal potentials of iCa,L and iK respectively. The action potential was sustained by the incomplete deactivation of iCa,L and the Na-Ca exchanger, iNaCa. Despite the incorporation of "square-root" activation by [K]o of all K+ currents, the model was unable to correctly simulate the response to elevated [K]o.
  //
  // The original paper reference is cited below:
  //
  // Ion Currents Underlying Sinoatrial Node Pacemaker Activity: A New Single Cell Mathematical Model, Socrates Dokos, Branko Celler, and Nigel Lovell, 1996, Theoretical Journal of Biology , 181, 245-272. PubMed ID: 8869126 (http://www.ncbi.nlm.nih.gov/pubmed/8869126)
  //
  // cell diagram
  //
  // A schematic diagram of the Dokos et al. 1996 mathematical model of the SA node cell. Sodium, calcium and potassium ions are exchanged between the intracellular and extracellular environments through channels, the sodium-potassium pump and the sodium-calcium exchanger. Calcium is transferred between the cytosol and the sarcoplasmic reticulum (SR), and between the local regions of the SR.
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_second as
    unit second {expo: -1};
    unit millimolar {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;
  def unit nanoF as
    unit farad {pref: nano};
  enddef;
  def unit picoA_per_millimolar as
    unit ampere {pref: pico};
    unit millimolar {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit mA_pA as
    unit ampere {pref: milli};
    unit ampere {expo: -1, pref: pico};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit microlitre as
    unit litre {pref: micro};
  enddef;
  def unit litre_micrometre3 as
    unit litre;
    unit microlitre {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp constants as
    var R: joule_per_kilomole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
  enddef;

  def comp membrane as
    var E: millivolt {init: -64.9, pub: out};
    var C: nanoF {init: 3.2e-5};
    var i_tot: picoA;
    var time: second {pub: in};
    var i_CaL: picoA {pub: in};
    var i_CaT: picoA {pub: in};
    var i_Na: picoA {pub: in};
    var i_K: picoA {pub: in};
    var i_f: picoA {pub: in};
    var i_p: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_bNa: picoA {pub: in};
    var i_bK: picoA {pub: in};
    i_tot = i_CaL+i_CaT+i_Na+i_K+i_f+i_p+i_NaCa+i_bNa+i_bK;
    ode(E, time) = -i_tot/C;
  enddef;

  def comp reversal_potentials as
    var E_Ca: millivolt {pub: out};
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Cao/Cai);
    E_Na = R*T/F*ln(Nao/Nai);
    E_K = R*T/F*ln(Ko/Ki);
  enddef;

  def comp L_type_calcium_current as
    var i_CaL: picoA {pub: out};
    var g_CaL: nanoS {init: 0.4};
    var E_Ca: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var E: millivolt {priv: out, pub: in};
    var Cai: millimolar {priv: out, pub: in};
    var dL: dimensionless {priv: in};
    var fL: dimensionless {priv: in};
    var fL2: dimensionless {priv: in};
    i_CaL = g_CaL*dL*fL*fL2*(E-E_Ca+75{millivolt});
  enddef;

  def comp L_type_calcium_current_d_gate as
    var dL: dimensionless {init: 0.0001, pub: out};
    var dL_infinity: dimensionless;
    var tau_dL: second {init: 0.002};
    var E: millivolt {pub: in};
    var time: second {pub: in};
    dL_infinity = 1{dimensionless}/(1{dimensionless}+exp((E+6.6{millivolt})/(-6.6{millivolt})));
    ode(dL, time) = (dL_infinity-dL)/tau_dL;
  enddef;

  def comp L_type_calcium_current_f_gate as
    var fL: dimensionless {init: 0.1505, pub: out};
    var fL_infinity: dimensionless;
    var tau_fL: second;
    var E: millivolt {pub: in};
    var time: second {pub: in};
    fL_infinity = 1{dimensionless}/(1{dimensionless}+exp((E+25{millivolt})/6{millivolt}));
    tau_fL = 0.031{second}+1{second}/(1{dimensionless}+exp((E+37.6{millivolt})/8.1{millivolt}));
    ode(fL, time) = (fL_infinity-fL)/tau_fL;
  enddef;

  def comp L_type_calcium_current_f2_gate as
    var fL2: dimensionless {init: 0.219, pub: out};
    var alpha_fL2: per_second {init: 3};
    var beta_fL2: per_millimolar_second {init: 40000};
    var E: millivolt {pub: in};
    var Cai: millimolar {pub: in};
    var time: second {pub: in};
    ode(fL2, time) = alpha_fL2*(1{dimensionless}-fL2)-beta_fL2*Cai*fL2;
  enddef;

  def comp T_type_calcium_current as
    var i_CaT: picoA {pub: out};
    var g_CaT: nanoS {init: 0.085};
    var E_Ca: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var E: millivolt {priv: out, pub: in};
    var dT: dimensionless {priv: in};
    var fT: dimensionless {priv: in};
    i_CaT = g_CaT*dT*fT*(E-E_Ca+75{millivolt});
  enddef;

  def comp T_type_calcium_current_d_gate as
    var dT: dimensionless {init: 0.001, pub: out};
    var dT_infinity: dimensionless;
    var tau_dT: second;
    var E: millivolt {pub: in};
    var time: second {pub: in};
    dT_infinity = 1{dimensionless}/(1{dimensionless}+exp((E+23{millivolt})/(-6.1{millivolt})));
    tau_dT = 0.0006{second}+0.0054{second}/(1{dimensionless}+exp(0.03{per_millivolt}*(E+100{millivolt})));
    ode(dT, time) = (dT_infinity-dT)/tau_dT;
  enddef;

  def comp T_type_calcium_current_f_gate as
    var fT: dimensionless {init: 0.1328, pub: out};
    var fT_infinity: dimensionless;
    var tau_fT: second;
    var E: millivolt {pub: in};
    var time: second {pub: in};
    fT_infinity = 1{dimensionless}/(1{dimensionless}+exp((E+75{millivolt})/6.6{millivolt}));
    tau_fT = 0.001{second}+0.04{second}/(1{dimensionless}+exp(0.08{per_millivolt}*(E+65{millivolt})));
    ode(fT, time) = (fT_infinity-fT)/tau_fT;
  enddef;

  def comp fast_sodium_current as
    var i_Na: picoA {pub: out};
    var g_Na: nanoS {init: 0.25};
    var E_Na: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var E: millivolt {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*(E-E_Na);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.0139, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var E: millivolt {pub: in};
    var time: second {pub: in};
    alpha_m = 200{per_millivolt_second}*(E+34.3{millivolt})/(1{dimensionless}-exp(-0.09{per_millivolt}*(E+34.3{millivolt})));
    beta_m = 8000{per_second}*exp(-0.15{per_millivolt}*(E+56.2{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 0.0087, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var E: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 32.4{per_second}*exp(-0.14{per_millivolt}*(E+93.4{millivolt}));
    beta_h = 709{per_second}/(1{dimensionless}+4.2{dimensionless}*exp(-0.06{per_millivolt}*(E+45.4{millivolt})));
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp delayed_rectifying_potassium_current as
    var i_K: picoA {pub: out};
    var i_KK: picoA {pub: out};
    var i_KNa: picoA {pub: out};
    var Kk: picoA_per_millimolar {init: 0.00026};
    var P_KNa: dimensionless {init: 0.035};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var time: second {priv: out, pub: in};
    var E: millivolt {priv: out, pub: in};
    var x: dimensionless {priv: in};
    i_KK = x*Kk*pow(Ko/1{millimolar}, 0.59{dimensionless})*(Ki-Ko*exp(-E*F/(R*T)));
    i_KNa = x*Kk*P_KNa*pow(Ko/1{millimolar}, 0.59{dimensionless})*(Nai-Nao*exp(-E*F/(R*T)));
    i_K = i_KK+i_KNa;
  enddef;

  def comp delayed_rectifying_potassium_current_x_gate as
    var x: dimensionless {init: 0.5682, pub: out};
    var x_infinity: dimensionless;
    var tau_x: second;
    var E: millivolt {pub: in};
    var time: second {pub: in};
    x_infinity = 1{dimensionless}/(1{dimensionless}+exp((E+25.1{millivolt})/(-7.4{millivolt})));
    tau_x = 1{second}/(17{dimensionless}*exp(0.0398{per_millivolt}*E)+0.211{dimensionless}*exp(-0.051{per_millivolt}*E));
    ode(x, time) = (x_infinity-x)/tau_x;
  enddef;

  def comp hyperpolarising_activated_current as
    var i_f: picoA {pub: out};
    var i_fNa: picoA {pub: out};
    var i_fK: picoA {pub: out};
    var Kmf: millimolar {init: 10.3};
    var g_fNa: nanoS {init: 0.0081};
    var g_fK: nanoS {init: 0.0135};
    var E_Na: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    var time: second {priv: out, pub: in};
    var E: millivolt {priv: out, pub: in};
    var y: dimensionless {priv: in};
    i_fNa = y*pow(Ko, 1.83{dimensionless})/(pow(Ko, 1.83{dimensionless})+pow(Kmf, 1.83{dimensionless}))*g_fNa*(E-E_Na);
    i_fK = y*pow(Ko, 1.83{dimensionless})/(pow(Ko, 1.83{dimensionless})+pow(Kmf, 1.83{dimensionless}))*g_fK*(E-E_K);
    i_f = i_fK+i_fNa;
  enddef;

  def comp hyperpolarising_activated_current_y_gate as
    var y: dimensionless {init: 0.0287, pub: out};
    var alpha_y: per_second;
    var beta_y: per_second;
    var E: millivolt {pub: in};
    var time: second {pub: in};
    alpha_y = 0.36{per_millivolt_second}*(E+137.8{millivolt})/(exp(0.066{per_millivolt}*(E+137.8{millivolt}))-1{dimensionless});
    beta_y = 0.1{per_millivolt_second}*(E+76.3{millivolt})/(1{dimensionless}-exp(-0.21{per_millivolt}*(E+76.3{millivolt})));
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  def comp sodium_potassium_pump as
    var i_p: picoA {pub: out};
    var KmNa: millimolar {init: 40};
    var KmK: millimolar {init: 1};
    var i_pmax: picoA {init: 0.226};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var time: second {pub: in};
    var E: millivolt {pub: in};
    i_p = i_pmax*Nai/(Nai+KmNa)*Ko/(Ko+KmK)*(1{dimensionless}-sqr((E-40{millivolt})/211{millivolt}));
  enddef;

  def comp sodium_calcium_exchange_current as
    var i_NaCa: picoA {pub: out};
    var kNaCa: picoA {init: 4};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var k41: dimensionless;
    var k34: dimensionless;
    var k23: dimensionless;
    var k21: dimensionless;
    var k32: dimensionless;
    var k43: dimensionless;
    var k12: dimensionless;
    var k14: dimensionless;
    var Qci: dimensionless {init: 0.1369};
    var Qn: dimensionless {init: 0.4315};
    var Qco: dimensionless {init: 0};
    var K3ni: millimolar {init: 26.44};
    var Kci: millimolar {init: 0.0207};
    var K1ni: millimolar {init: 395.3};
    var K2ni: millimolar {init: 2.289};
    var Kcni: millimolar {init: 26.44};
    var K3no: millimolar {init: 4.663};
    var K1no: millimolar {init: 1628};
    var K2no: millimolar {init: 561.4};
    var Kco: millimolar {init: 3.663};
    var do: dimensionless;
    var di: dimensionless;
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var time: second {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var E: millivolt {pub: in};
    do = 1{dimensionless}+Cao/Kco+Cao/Kco*exp(Qco*E*F/(R*T))+Nao/K1no+sqr(Nao)/(K1no*K2no)+pow(Nao, 3{dimensionless})/(K1no*K2no*K3no);
    k32 = exp(Qn*E*F/(2{dimensionless}*R*T));
    k23 = (sqr(Nao)/(K1no*K2no)+pow(Nao, 3{dimensionless})/(K1no*K2no*K3no))*exp(-Qn*E*F/(2{dimensionless}*R*T))/do;
    k21 = Cao/Kco*exp(-Qco*E*F/(R*T))/do;
    k34 = Nao/(K3no+Nao);
    di = 1{dimensionless}+Cai/Kci+Cai/Kci*exp(-Qci*E*F/(R*T))+Cai*Nai/(Kci*Kcni)+Nai/K1ni+sqr(Nai)/(K1ni*K2ni)+pow(Nai, 3{dimensionless})/(K1ni*K2ni*K3ni);
    k41 = exp(-Qn*E*F/(2{dimensionless}*R*T));
    k14 = (sqr(Nai)/(K1ni*K2ni)+pow(Nai, 3{dimensionless})/(K1ni*K2ni*K3ni))*exp(Qn*E*F/(2{dimensionless}*R*T))/di;
    k12 = Cai/Kci*exp(-Qci*E*F/(R*T))/di;
    k43 = Nai/(K3ni+Nai);
    x1 = k41*k34*(k23+k21)+k21*k32*(k43+k41);
    x2 = k32*k43*(k14+k12)+k41*k12*(k34+k32);
    x3 = k14*k43*(k23+k21)+k12*k23*(k43+k41);
    x4 = k23*k34*(k14+k12)+k14*k21*(k34+k32);
    i_NaCa = kNaCa*(x2*k21-x1*k12)/(x1+x2+x3+x4);
  enddef;

  def comp background_sodium_current as
    var i_bNa: picoA {pub: out};
    var g_Nab: nanoS {init: 0.00024};
    var time: second {pub: in};
    var E: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    i_bNa = g_Nab*(E-E_Na);
  enddef;

  def comp background_potassium_current as
    var i_bK: picoA {pub: out};
    var KbK: picoA_per_millimolar {init: 0.00007};
    var time: second {pub: in};
    var E: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    i_bK = KbK*pow(Ko/1{millimolar}, 0.41{dimensionless})*(Ki-Ko*exp(-E*F/(R*T)));
  enddef;

  def comp sarcoplasmic_reticulum_kinetics as
    var i_up: picoA {pub: out};
    var i_tr: picoA {pub: out};
    var i_rel: picoA {pub: out};
    var V_i: microlitre {pub: in};
    var V_rel: microlitre {pub: out};
    var V_up: microlitre {pub: out};
    var i_up_max: picoA {init: 0.0212};
    var KmCaup: millimolar {init: 0.0005};
    var KmCarel: millimolar {init: 0.001};
    var tau_rel: second {init: 0.005};
    var tau_tr: second {init: 0.4};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cai: millimolar {pub: in};
    var Caup: millimolar {pub: in};
    var Carel: millimolar {pub: in};
    V_rel = 0.006{dimensionless}*V_i;
    V_up = 0.014{dimensionless}*V_i;
    i_up = i_up_max*sqr(Cai)/(sqr(Cai)+sqr(KmCaup));
    i_tr = 2{dimensionless}*1{litre_micrometre3}*V_rel*F/(1{mA_pA}*tau_tr)*Caup;
    i_rel = 2{dimensionless}*1{litre_micrometre3}*V_rel*F/(1{mA_pA}*tau_rel)*Carel*sqr(Cai)/(sqr(Cai)+sqr(KmCarel));
  enddef;

  def comp ion_concentrations as
    var Cai: millimolar {init: 0.000034, pub: out};
    var Cao: millimolar {init: 2.0004, pub: out};
    var Caup: millimolar {init: 0.5832, pub: out};
    var Carel: millimolar {init: 0.1101, pub: out};
    var Nai: millimolar {init: 7.4994, pub: out};
    var Nao: millimolar {init: 139.9929, pub: out};
    var Ki: millimolar {init: 140.0073, pub: out};
    var Ko: millimolar {init: 5.4243, pub: out};
    var V_i: microlitre {init: 2.5e-6, pub: out};
    var V_e: microlitre;
    var tau_b: second {init: 0.1};
    var Nab: millimolar {init: 140};
    var Cab: millimolar {init: 2};
    var Kb: millimolar {init: 5.4};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_bNa: picoA {pub: in};
    var i_fNa: picoA {pub: in};
    var i_Na: picoA {pub: in};
    var i_p: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_KNa: picoA {pub: in};
    var i_KK: picoA {pub: in};
    var i_fK: picoA {pub: in};
    var i_bK: picoA {pub: in};
    var i_CaL: picoA {pub: in};
    var i_CaT: picoA {pub: in};
    var i_up: picoA {pub: in};
    var i_rel: picoA {pub: in};
    var i_tr: picoA {pub: in};
    var V_rel: microlitre {pub: in};
    var V_up: microlitre {pub: in};
    V_e = 0.2{dimensionless}*V_i;
    ode(Nai, time) = -1{mA_pA}*(i_bNa+i_fNa+i_Na+3{dimensionless}*i_p+3{dimensionless}*i_NaCa+i_KNa)/(F*1{litre_micrometre3}*V_i);
    ode(Nao, time) = 1{mA_pA}*(i_bNa+i_fNa+i_Na+3{dimensionless}*i_p+3{dimensionless}*i_NaCa+i_KNa)/(F*1{litre_micrometre3}*V_e)+(Nab-Nao)/tau_b;
    ode(Ki, time) = -1{mA_pA}*(i_KK+i_fK-2{dimensionless}*i_p+i_bK)/(F*1{litre_micrometre3}*V_i);
    ode(Ko, time) = 1{mA_pA}*(i_KK+i_fK-2{dimensionless}*i_p+i_bK)/(F*1{litre_micrometre3}*V_e)+(Kb-Ko)/tau_b;
    ode(Cai, time) = -1{mA_pA}*(i_CaL+i_CaT-2{dimensionless}*i_NaCa+i_up+(-i_rel))/(2{dimensionless}*F*1{litre_micrometre3}*V_i);
    ode(Cao, time) = 1{mA_pA}*(i_CaL+i_CaT-2{dimensionless}*i_NaCa)/(2{dimensionless}*F*1{litre_micrometre3}*V_e)+(Cab-Cao)/tau_b;
    ode(Caup, time) = 1{mA_pA}*(i_up-i_tr)/(2{dimensionless}*1{litre_micrometre3}*V_up*F);
    ode(Carel, time) = 1{mA_pA}*(i_tr-i_rel)/(2{dimensionless}*1{litre_micrometre3}*V_rel*F);
  enddef;

  def group as containment for
    comp membrane incl
      comp L_type_calcium_current incl
        comp L_type_calcium_current_d_gate;
        comp L_type_calcium_current_f_gate;
        comp L_type_calcium_current_f2_gate;
      endcomp;
      comp T_type_calcium_current incl
        comp T_type_calcium_current_d_gate;
        comp T_type_calcium_current_f_gate;
      endcomp;
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
      endcomp;
      comp delayed_rectifying_potassium_current incl
        comp delayed_rectifying_potassium_current_x_gate;
      endcomp;
      comp hyperpolarising_activated_current incl
        comp hyperpolarising_activated_current_y_gate;
      endcomp;
      comp sodium_potassium_pump;
      comp sodium_calcium_exchange_current;
      comp background_sodium_current;
      comp background_potassium_current;
      comp sarcoplasmic_reticulum_kinetics;
      comp ion_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    comp L_type_calcium_current incl
      comp L_type_calcium_current_d_gate;
      comp L_type_calcium_current_f_gate;
      comp L_type_calcium_current_f2_gate;
    endcomp;
    comp T_type_calcium_current incl
      comp T_type_calcium_current_d_gate;
      comp T_type_calcium_current_f_gate;
    endcomp;
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp delayed_rectifying_potassium_current incl
      comp delayed_rectifying_potassium_current_x_gate;
    endcomp;
    comp hyperpolarising_activated_current incl
      comp hyperpolarising_activated_current_y_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between L_type_calcium_current and environment for
    vars time and time;
  enddef;
  def map between T_type_calcium_current and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between delayed_rectifying_potassium_current and environment for
    vars time and time;
  enddef;
  def map between hyperpolarising_activated_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_exchange_current and environment for
    vars time and time;
  enddef;
  def map between background_sodium_current and environment for
    vars time and time;
  enddef;
  def map between background_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sarcoplasmic_reticulum_kinetics and environment for
    vars time and time;
  enddef;
  def map between ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and constants for
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between delayed_rectifying_potassium_current and constants for
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between sodium_calcium_exchange_current and constants for
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between background_potassium_current and constants for
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between sarcoplasmic_reticulum_kinetics and constants for
    vars F and F;
  enddef;
  def map between ion_concentrations and constants for
    vars F and F;
  enddef;
  def map between L_type_calcium_current and membrane for
    vars E and E;
    vars i_CaL and i_CaL;
  enddef;
  def map between T_type_calcium_current and membrane for
    vars E and E;
    vars i_CaT and i_CaT;
  enddef;
  def map between fast_sodium_current and membrane for
    vars E and E;
    vars i_Na and i_Na;
  enddef;
  def map between delayed_rectifying_potassium_current and membrane for
    vars E and E;
    vars i_K and i_K;
  enddef;
  def map between hyperpolarising_activated_current and membrane for
    vars E and E;
    vars i_f and i_f;
  enddef;
  def map between sodium_potassium_pump and membrane for
    vars E and E;
    vars i_p and i_p;
  enddef;
  def map between sodium_calcium_exchange_current and membrane for
    vars E and E;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between background_sodium_current and membrane for
    vars E and E;
    vars i_bNa and i_bNa;
  enddef;
  def map between background_potassium_current and membrane for
    vars E and E;
    vars i_bK and i_bK;
  enddef;
  def map between reversal_potentials and ion_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ki and Ki;
    vars Ko and Ko;
  enddef;
  def map between L_type_calcium_current and reversal_potentials for
    vars E_Ca and E_Ca;
  enddef;
  def map between T_type_calcium_current and reversal_potentials for
    vars E_Ca and E_Ca;
  enddef;
  def map between fast_sodium_current and reversal_potentials for
    vars E_Na and E_Na;
  enddef;
  def map between hyperpolarising_activated_current and reversal_potentials for
    vars E_Na and E_Na;
    vars E_K and E_K;
  enddef;
  def map between background_sodium_current and reversal_potentials for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_calcium_current and ion_concentrations for
    vars Cai and Cai;
    vars i_CaL and i_CaL;
  enddef;
  def map between delayed_rectifying_potassium_current and ion_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_KK and i_KK;
    vars i_KNa and i_KNa;
  enddef;
  def map between sodium_potassium_pump and ion_concentrations for
    vars Nai and Nai;
    vars Ko and Ko;
    vars i_p and i_p;
  enddef;
  def map between sodium_calcium_exchange_current and ion_concentrations for
    vars Nao and Nao;
    vars Nai and Nai;
    vars Cao and Cao;
    vars Cai and Cai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between background_potassium_current and ion_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_bK and i_bK;
  enddef;
  def map between sarcoplasmic_reticulum_kinetics and ion_concentrations for
    vars Cai and Cai;
    vars Caup and Caup;
    vars Carel and Carel;
    vars i_tr and i_tr;
    vars i_up and i_up;
    vars i_rel and i_rel;
    vars V_up and V_up;
    vars V_rel and V_rel;
    vars V_i and V_i;
  enddef;
  def map between T_type_calcium_current and ion_concentrations for
    vars i_CaT and i_CaT;
  enddef;
  def map between fast_sodium_current and ion_concentrations for
    vars i_Na and i_Na;
  enddef;
  def map between hyperpolarising_activated_current and ion_concentrations for
    vars i_fNa and i_fNa;
    vars i_fK and i_fK;
    vars Ko and Ko;
  enddef;
  def map between background_sodium_current and ion_concentrations for
    vars i_bNa and i_bNa;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_d_gate for
    vars dL and dL;
    vars time and time;
    vars E and E;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_f_gate for
    vars fL and fL;
    vars time and time;
    vars E and E;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_f2_gate for
    vars fL2 and fL2;
    vars time and time;
    vars E and E;
    vars Cai and Cai;
  enddef;
  def map between T_type_calcium_current and T_type_calcium_current_d_gate for
    vars dT and dT;
    vars time and time;
    vars E and E;
  enddef;
  def map between T_type_calcium_current and T_type_calcium_current_f_gate for
    vars fT and fT;
    vars time and time;
    vars E and E;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars E and E;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars E and E;
  enddef;
  def map between delayed_rectifying_potassium_current and delayed_rectifying_potassium_current_x_gate for
    vars x and x;
    vars time and time;
    vars E and E;
  enddef;
  def map between hyperpolarising_activated_current and hyperpolarising_activated_current_y_gate for
    vars y and y;
    vars time and time;
    vars E and E;
  enddef;
enddef;
