// This CellML file was generated on 15/10/2007 at 15:54:43 using:
//
// COR (0.9.31.801)
// Copyright 2002-2007 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// creator: Given Penny; Family Noble; Other J; Orgunit Department of Physiology, Anatomy & Genetics; Orgname Oxford University; penny.noble@dpag.ox.ac.uk
// comment: FN James Lawson; This model has been curated by Penny Noble of Oxford University and is known to run in PCEnv and COR and reproduce the results published in the paper it is based on.
// created: W3CDTF 2007-09-19T00:00:00+00:00
// publisher: Department of Physiology, Anatomy & Genetics, University of Oxford
// modification: Made 2 new variables - dCaCalmoddt and dCaTropdt in component "intracellular_calcium_concentration," equated these variables to d(CaCalmod)/d(time) and d(CaTrop)/d(time), respectively. This was done to allow PCEnv 0.2 to run the model.; W3CDTF 2007-09-20T12:35:21+12:00; Given James; Family Lawson; Other Richard
// modification: Units checked, curated; W3CDTF 2007-12-19T14:35:31+13:00; Given Penny; Family Noble; Other J
// reference: _1 electrophysiology; _2 atrial myocyte; subject_type keyword
// reference: Pubmed_id 1972993; title A Model of the Single Atrial Cell: Relation between Calcium Current and Calcium Release; Given Y; Family Earm; Other E; Given D; Family Noble; volume 240; first_page 83; W3CDTF 1990-01-01 00:00; title Proceedings of the Royal Society of London. Series B, Biological Sciences; last_page 96
// simulation: endingValue 4; maximumStepSize 0.001; pointDensity 50000
// comment: FN James Lawson; This file is a CellML description of the model described in the paper "A model of the single atrial cell: relation between calcium current and calcium release by Earm Y, Noble D, Proceedings of the Royal Society of London. Series B, Biological Sciences, Vol. 240, No. 1297. (May 22, 1990), pp. 83-96."
def model earm_noble_1990 as
  // Model Status
  //
  // This CellML model runs in OpenCell and COR and reproduce the published results. The units have been checked and they are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: The hypothesis that calcium release from the sarcoplasmic reticulum in cardiac muscle is induced by rises in free cytosolic calcium (Fabiato 1983, Am. J. Physiol 245) allows the possibility that the release could be at least partly regenerative. There would then be a non-linear relation between calcium current and calcium release. We have investigated this possibility in a single-cell version of the rabbit-atrial model developed by Hilgemann & Noble (1987, Proc. R. Soc. Lond. B 230). The model predicts different voltage ranges of activation for calcium-dependent processes (like the sodium-calcium exchange current, contraction or Fura-2 signals) and the calcium current, in agreement with the experimental results obtained by Earm et al. (1990, Proc. R. Soc. Lond. B 240) on exchange current tails, Cannell et al. (1987, Science, Wash. 238) by using Fura-2 signals, and Fedida et al. (1987, J. Physiol., Lond. 385) and Talo et al. (1988, Biology of isolated adult cardiac myocytes) by using contraction. However, when the Fura-2 concentration is sufficiently high (greater than 200 microM) the activation ranges become very similar as the buffering properties of Fura-2 are sufficient to remove the regenerative effect. It is therefore important to allow for the buffering properties of calcium indicators when investigating the correlation between calcium current and calcium release.
  //
  // schematic diagram of a human atrial myocyte
  //
  // A schematic representation of the Earm and Noble 1990 model.
  //
  // The original paper reference is cited below:
  //
  // A model of the single atrial cell: relation between calcium current and calcium release, Y. E. Earm and D. Noble, 1990, Proceedings of the Royal Society of London. Series B, Biological Sciences , 240, 83-96. PubMed ID: 1972993 (http://www.ncbi.nlm.nih.gov/pubmed/1972993)
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit mA_nA as
    unit ampere {pref: milli};
    unit nanoA {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit nanoA_per_millimolar as
    unit nanoA;
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit micrometre3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit litre_micrometre3 as
    unit litre;
    unit micrometre3 {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {init: -91.6, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    var RTONF: millivolt {pub: out};
    var C_m: microF {init: 4e-5};
    var time: second {pub: in};
    var i_b_K: nanoA {pub: in};
    var i_K1: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_b_Na: nanoA {pub: in};
    var i_b_Ca: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_Na: nanoA {pub: in};
    var i_Ca_L: nanoA {pub: in};
    var i_Stim: nanoA;
    var stim_start: second {init: 0.1};
    var stim_end: second {init: 100000};
    var stim_period: second {init: 1};
    var stim_duration: second {init: 0.002};
    var stim_amplitude: nanoA {init: -1.3};
    RTONF = R*T/F;
    i_Stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{nanoA};
    endsel;
    ode(V, time) = -1{dimensionless}/C_m*(i_Stim+i_b_K+i_K1+i_to+i_b_Na+i_b_Ca+i_NaK+i_NaCa+i_Na+i_Ca_L);
  enddef;

  def comp fast_sodium_current as
    var i_Na: nanoA {pub: out};
    var g_Na: microS {init: 0.5};
    var E_mh: millivolt;
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var K_c: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    E_mh = RTONF*ln((Na_o+0.12{dimensionless}*K_c)/(Na_i+0.12{dimensionless}*K_i));
    i_Na = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.076, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_m: millivolt {init: 1e-5};
    var E0_m: millivolt;
    E0_m = V+41{millivolt};
    alpha_m = sel
      case abs(E0_m) < delta_m:
        2000{per_second};
      otherwise:
        200{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 8000{per_second}*exp(-0.056{per_millivolt}*(V+66{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 0.015, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 20{per_second}*exp(-0.125{per_millivolt}*(V+75{millivolt}));
    beta_h = 2000{per_second}/(1{dimensionless}+320{dimensionless}*exp(-0.1{per_millivolt}*(V+75{millivolt})));
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp transient_outward_current as
    var i_to: nanoA {pub: out};
    var g_to: microS {init: 0.01};
    var E_K: millivolt {pub: out};
    var g_to_s: dimensionless {init: 0};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var K_c: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var r: dimensionless {priv: in};
    var s: dimensionless {priv: in};
    E_K = RTONF*ln(K_c/K_i);
    i_to = g_to*(g_to_s+s*(1{dimensionless}-g_to_s))*r*(V-E_K);
  enddef;

  def comp transient_outward_current_r_gate as
    var r: dimensionless {init: 0, pub: out};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(r, time) = 333{per_second}*(1{dimensionless}/(1{dimensionless}+exp(-(V+4{millivolt})/5{millivolt}))-r);
  enddef;

  def comp transient_outward_current_s_gate as
    var s: dimensionless {init: 1, pub: out};
    var alpha_s: per_second;
    var beta_s: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_s = 0.033{per_second}*exp(-V/17{millivolt});
    beta_s = 33{per_second}/(1{dimensionless}+exp(-0.125{per_millivolt}*(V+10{millivolt})));
    ode(s, time) = alpha_s*(1{dimensionless}-s)-beta_s*s;
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: nanoA {pub: out};
    var i_NaK_max: nanoA {init: 0.14};
    var K_mK: millimolar {init: 1};
    var K_mNa: millimolar {init: 40};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Na_i: millimolar {pub: in};
    var K_c: millimolar {pub: in};
    i_NaK = i_NaK_max*K_c/(K_mK+K_c)*Na_i/(K_mNa+Na_i);
  enddef;

  def comp sodium_background_current as
    var E_Na: millivolt {pub: out};
    var i_b_Na: nanoA {pub: out};
    var g_b_Na: microS {init: 0.00012};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    E_Na = RTONF*ln(Na_o/Na_i);
    i_b_Na = g_b_Na*(V-E_Na);
  enddef;

  def comp calcium_background_current as
    var E_Ca: millivolt {pub: out};
    var i_b_Ca: nanoA {pub: out};
    var g_b_Ca: microS {init: 5e-5};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    E_Ca = 0.5{dimensionless}*RTONF*ln(Ca_o/Ca_i);
    i_b_Ca = g_b_Ca*(V-E_Ca);
  enddef;

  def comp Na_Ca_exchanger as
    var i_NaCa: nanoA {pub: out};
    var k_NaCa: nanoA {init: 0.0001};
    var n_NaCa: dimensionless {init: 3};
    var d_NaCa: dimensionless {init: 0.0001};
    var gamma: dimensionless {init: 0.5};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    i_NaCa = k_NaCa*(exp(gamma*(n_NaCa-2{dimensionless})*V/RTONF)*pow(Na_i, n_NaCa)*Ca_o-exp((gamma-1{dimensionless})*(n_NaCa-2{dimensionless})*V/RTONF)*pow(Na_o, n_NaCa)*Ca_i)/((1{millimolar4}+d_NaCa*(Ca_i*pow(Na_o, n_NaCa)+Ca_o*pow(Na_i, n_NaCa)))*(1{dimensionless}+Ca_i/0.0069{millimolar}));
  enddef;

  def comp potassium_background_current as
    var E_K: millivolt {pub: in};
    var i_b_K: nanoA {pub: out};
    var g_b_K: microS {init: 0.0017};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_b_K = g_b_K*(V-E_K);
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: nanoA {pub: out};
    var E_K: millivolt {pub: in};
    var g_K1: microS {init: 0.017};
    var K_m_K1: millimolar {init: 10};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var K_c: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    i_K1 = g_K1*K_c/(K_c+K_m_K1)*(V-E_K)/(1{dimensionless}+exp((V-E_K-10{millivolt})*2{dimensionless}/RTONF));
  enddef;

  def comp L_type_calcium_current as
    var i_Ca_L: nanoA {pub: out};
    var i_Ca_L_Ca: nanoA {pub: out};
    var i_Ca_L_K: nanoA {pub: out};
    var i_Ca_L_Na: nanoA {pub: out};
    var P_Ca_L: nanoA_per_millimolar {init: 0.05};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ca_i: millimolar {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var K_c: millimolar {pub: in};
    var d: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    var CaChon: dimensionless {priv: in};
    i_Ca_L = i_Ca_L_Ca+i_Ca_L_K+i_Ca_L_Na;
    i_Ca_L_Ca = 4{dimensionless}*P_Ca_L*d*CaChon*(V-50{millivolt})/RTONF/(1{dimensionless}-exp(-(V-50{millivolt})*2{dimensionless}/RTONF))*(Ca_i*exp(100{millivolt}/RTONF)-Ca_o*exp(-(V-50{millivolt})*2{dimensionless}/RTONF));
    i_Ca_L_K = 0.002{dimensionless}*P_Ca_L*d*CaChon*(V-50{millivolt})/RTONF/(1{dimensionless}-exp(-(V-50{millivolt})/RTONF))*(K_i*exp(50{millivolt}/RTONF)-K_c*exp(-(V-50{millivolt})/RTONF));
    i_Ca_L_Na = 0.01{dimensionless}*P_Ca_L*d*CaChon*(V-50{millivolt})/RTONF/(1{dimensionless}-exp(-(V-50{millivolt})/RTONF))*(Na_i*exp(50{millivolt}/RTONF)-Na_o*exp(-(V-50{millivolt})/RTONF));
  enddef;

  def comp L_type_calcium_current_d_gate as
    var d: dimensionless {init: 0.0011, pub: out};
    var alpha_d: per_second;
    var beta_d: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var E0_d: millivolt;
    E0_d = V+19{millivolt};
    alpha_d = sel
      case abs(E0_d) < 0.0001{millivolt}:
        120{per_second};
      otherwise:
        30{per_millivolt_second}*E0_d/(1{dimensionless}-exp(-E0_d/4{millivolt}));
    endsel;
    beta_d = sel
      case abs(E0_d) < 0.0001{millivolt}:
        120{per_second};
      otherwise:
        12{per_millivolt_second}*E0_d/(exp(E0_d/10{millivolt})-1{dimensionless});
    endsel;
    ode(d, time) = alpha_d*(1{dimensionless}-d)-beta_d*d;
  enddef;

  def comp L_type_calcium_current_f_Ca_gate as
    var f_Ca: dimensionless {init: 0.785, pub: out};
    var alpha_f_Ca: per_second;
    var beta_f_Ca: per_second;
    var CaChoff: dimensionless;
    var CaChon: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var Ca_i: millimolar {pub: in};
    var E0_f: millivolt;
    E0_f = V+34{millivolt};
    alpha_f_Ca = sel
      case abs(E0_f) < 0.0001{millivolt}:
        25{per_second};
      otherwise:
        6.25{per_millivolt_second}*E0_f/(exp(E0_f/4{millivolt})-1{dimensionless});
    endsel;
    beta_f_Ca = 12{per_second}/(1{dimensionless}+exp(-E0_f/4{millivolt}));
    ode(f_Ca, time) = (120{dimensionless}*(1{dimensionless}-f_Ca)*CaChoff+(1{dimensionless}-f_Ca)*(1{dimensionless}-CaChoff))*beta_f_Ca-alpha_f_Ca*f_Ca;
    CaChoff = Ca_i/(0.001{millimolar}+Ca_i);
    CaChon = (1{dimensionless}-f_Ca)*(1{dimensionless}-CaChoff);
  enddef;

  def comp sarcoplasmic_reticulum_calcium_pump as
    var i_up: millimolar_per_second {pub: out};
    var K_1: dimensionless;
    var K_2: millimolar;
    var K_cyca: millimolar {init: 0.0003};
    var K_xcs: dimensionless {init: 0.4};
    var K_srca: millimolar {init: 0.5};
    var alpha_up: millimolar_per_second {init: 3};
    var beta_up: millimolar_per_second {init: 0.23};
    var Ca_up: millimolar {pub: in};
    var time: second {pub: in};
    var Ca_i: millimolar {pub: in};
    K_1 = K_cyca*K_xcs/K_srca;
    K_2 = Ca_i+Ca_up*K_1+K_cyca*K_xcs+K_cyca;
    i_up = Ca_i/K_2*alpha_up-Ca_up*K_1/K_2*beta_up;
  enddef;

  def comp calcium_release as
    var i_rel: millimolar_per_second {pub: out};
    var VoltDep: dimensionless;
    var RegBindSite: dimensionless;
    var ActRate: per_second;
    var InactRate: per_second;
    var K_leak_rate: per_second {init: 0};
    var K_m_rel: per_second {init: 250};
    var PrecFrac: dimensionless;
    var ActFrac: dimensionless {init: 0};
    var ProdFrac: dimensionless {init: 0};
    var ProdFracRate: per_second {init: 1};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    PrecFrac = 1{dimensionless}-ActFrac-ProdFrac;
    VoltDep = exp(0.08{per_millivolt}*(V-40{millivolt}));
    RegBindSite = sqr(Ca_i/(Ca_i+0.0005{millimolar}));
    ActRate = 600{per_second}*VoltDep+500{per_second}*RegBindSite;
    InactRate = 60{per_second}+500{per_second}*RegBindSite;
    ode(ActFrac, time) = PrecFrac*ActRate-ActFrac*InactRate;
    ode(ProdFrac, time) = ActFrac*InactRate-ProdFracRate*ProdFrac;
    i_rel = (sqr(ActFrac/(ActFrac+0.25{dimensionless}))*K_m_rel+K_leak_rate)*Ca_rel;
  enddef;

  def comp calcium_translocation as
    var i_trans: millimolar_per_second {pub: out};
    var Ca_rel: millimolar {pub: in};
    var Ca_up: millimolar {pub: in};
    var alpha_tr: per_second {init: 50};
    var time: second {pub: in};
    i_trans = (Ca_up-Ca_rel)*alpha_tr;
  enddef;

  def comp extracellular_sodium_concentration as
    var Na_o: millimolar {init: 140, pub: out};
  enddef;

  def comp intracellular_sodium_concentration as
    var Na_i: millimolar {init: 6.48, pub: out};
    var V_i: micrometre3 {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: nanoA {pub: in};
    var i_b_Na: nanoA {pub: in};
    var i_Ca_L_Na: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    ode(Na_i, time) = -1{mA_nA}/(1{litre_micrometre3}*V_i*F)*(i_Na+i_b_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa+i_Ca_L_Na);
  enddef;

  def comp extracellular_calcium_concentration as
    var Ca_o: millimolar {init: 2, pub: out};
  enddef;

  def comp extracellular_potassium_concentration as
    var K_c: millimolar {init: 4, pub: out};
  enddef;

  def comp intracellular_potassium_concentration as
    var K_i: millimolar {init: 140, pub: out};
    var V_i: micrometre3 {pub: in};
    var i_K1: nanoA {pub: in};
    var i_Ca_L_K: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_b_K: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    ode(K_i, time) = -1{mA_nA}/(1{litre_micrometre3}*V_i*F)*(i_K1+i_Ca_L_K+i_to+i_b_K-2{dimensionless}*i_NaK);
  enddef;

  def comp intracellular_calcium_concentration as
    var Ca_i: millimolar {init: 1e-5, pub: out};
    var Ca_up: millimolar {init: 0.3, pub: out};
    var Ca_rel: millimolar {init: 0.3, pub: out};
    var Ca_Calmod: millimolar {init: 0.0005};
    var Ca_Trop: millimolar {init: 0.0015};
    var Calmod: millimolar {init: 0.02};
    var Trop: millimolar {init: 0.15};
    var alpha_Calmod: per_millimolar_second {init: 100000};
    var beta_Calmod: per_second {init: 50};
    var alpha_Trop: per_millimolar_second {init: 100000};
    var beta_Trop: per_second {init: 200};
    var radius: micrometre {init: 0.01};
    var length: micrometre {init: 0.08};
    var V_i: micrometre3 {pub: out};
    var V_Cell: micrometre3;
    var V_i_ratio: dimensionless;
    var V_rel_ratio: dimensionless {init: 0.1};
    var V_e_ratio: dimensionless {init: 0.4};
    var V_up_ratio: dimensionless {init: 0.01};
    var i_up: millimolar_per_second {pub: in};
    var i_trans: millimolar_per_second {pub: in};
    var i_rel: millimolar_per_second {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_Ca_L_Ca: nanoA {pub: in};
    var i_b_Ca: nanoA {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    V_Cell = 3.141592654{dimensionless}*sqr(radius)*length;
    V_i_ratio = 1{dimensionless}-V_e_ratio-V_up_ratio-V_rel_ratio;
    V_i = V_Cell*V_i_ratio;
    ode(Ca_i, time) = -1{mA_nA}/(2{dimensionless}*1{litre_micrometre3}*V_i*F)*(i_Ca_L_Ca+i_b_Ca-2{dimensionless}*i_NaCa)+i_rel*V_rel_ratio/V_i_ratio-ode(Ca_Calmod, time)-ode(Ca_Trop, time)-i_up;
    ode(Ca_up, time) = V_i_ratio/V_up_ratio*i_up-i_trans;
    ode(Ca_rel, time) = V_up_ratio/V_rel_ratio*i_trans-i_rel;
    ode(Ca_Calmod, time) = alpha_Calmod*Ca_i*(Calmod-Ca_Calmod)-beta_Calmod*Ca_Calmod;
    ode(Ca_Trop, time) = alpha_Trop*Ca_i*(Trop-Ca_Trop)-beta_Trop*Ca_Trop;
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
      endcomp;
      comp sodium_potassium_pump;
      comp sodium_background_current;
      comp calcium_background_current;
      comp Na_Ca_exchanger;
      comp potassium_background_current;
      comp time_independent_potassium_current;
      comp transient_outward_current incl
        comp transient_outward_current_s_gate;
        comp transient_outward_current_r_gate;
      endcomp;
      comp L_type_calcium_current incl
        comp L_type_calcium_current_d_gate;
        comp L_type_calcium_current_f_Ca_gate;
      endcomp;
      comp sarcoplasmic_reticulum_calcium_pump;
      comp calcium_release;
      comp calcium_translocation;
      comp extracellular_potassium_concentration;
      comp intracellular_potassium_concentration;
      comp extracellular_sodium_concentration;
      comp intracellular_sodium_concentration;
      comp extracellular_calcium_concentration;
      comp intracellular_calcium_concentration;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_r_gate;
      comp transient_outward_current_s_gate;
    endcomp;
    comp L_type_calcium_current incl
      comp L_type_calcium_current_d_gate;
      comp L_type_calcium_current_f_Ca_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between environment and intracellular_sodium_concentration for
    vars time and time;
  enddef;
  def map between environment and intracellular_potassium_concentration for
    vars time and time;
  enddef;
  def map between environment and intracellular_calcium_concentration for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between potassium_background_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between L_type_calcium_current and environment for
    vars time and time;
  enddef;
  def map between sarcoplasmic_reticulum_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between calcium_release and environment for
    vars time and time;
  enddef;
  def map between calcium_translocation and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and membrane for
    vars i_Na and i_Na;
    vars V and V;
    vars RTONF and RTONF;
  enddef;
  def map between transient_outward_current and membrane for
    vars i_to and i_to;
    vars V and V;
    vars RTONF and RTONF;
  enddef;
  def map between sodium_potassium_pump and membrane for
    vars i_NaK and i_NaK;
    vars V and V;
  enddef;
  def map between sodium_background_current and membrane for
    vars i_b_Na and i_b_Na;
    vars V and V;
    vars RTONF and RTONF;
  enddef;
  def map between calcium_background_current and membrane for
    vars i_b_Ca and i_b_Ca;
    vars V and V;
    vars RTONF and RTONF;
  enddef;
  def map between Na_Ca_exchanger and membrane for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars RTONF and RTONF;
  enddef;
  def map between potassium_background_current and membrane for
    vars i_b_K and i_b_K;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and membrane for
    vars i_K1 and i_K1;
    vars V and V;
    vars RTONF and RTONF;
  enddef;
  def map between L_type_calcium_current and membrane for
    vars i_Ca_L and i_Ca_L;
    vars V and V;
    vars RTONF and RTONF;
  enddef;
  def map between calcium_release and membrane for
    vars V and V;
  enddef;
  def map between membrane and intracellular_sodium_concentration for
    vars F and F;
  enddef;
  def map between membrane and intracellular_potassium_concentration for
    vars F and F;
  enddef;
  def map between membrane and intracellular_calcium_concentration for
    vars F and F;
  enddef;
  def map between fast_sodium_current and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between fast_sodium_current and intracellular_sodium_concentration for
    vars Na_i and Na_i;
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current and extracellular_potassium_concentration for
    vars K_c and K_c;
  enddef;
  def map between fast_sodium_current and intracellular_potassium_concentration for
    vars K_i and K_i;
  enddef;
  def map between sodium_potassium_pump and intracellular_sodium_concentration for
    vars Na_i and Na_i;
    vars i_NaK and i_NaK;
  enddef;
  def map between sodium_potassium_pump and intracellular_potassium_concentration for
    vars i_NaK and i_NaK;
  enddef;
  def map between sodium_potassium_pump and extracellular_potassium_concentration for
    vars K_c and K_c;
  enddef;
  def map between intracellular_calcium_concentration and Na_Ca_exchanger for
    vars Ca_i and Ca_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between intracellular_sodium_concentration and Na_Ca_exchanger for
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between extracellular_sodium_concentration and Na_Ca_exchanger for
    vars Na_o and Na_o;
  enddef;
  def map between extracellular_calcium_concentration and Na_Ca_exchanger for
    vars Ca_o and Ca_o;
  enddef;
  def map between sodium_background_current and intracellular_sodium_concentration for
    vars Na_i and Na_i;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between sodium_background_current and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between calcium_background_current and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between calcium_background_current and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between potassium_background_current and intracellular_potassium_concentration for
    vars i_b_K and i_b_K;
  enddef;
  def map between time_independent_potassium_current and extracellular_potassium_concentration for
    vars K_c and K_c;
  enddef;
  def map between time_independent_potassium_current and intracellular_potassium_concentration for
    vars K_i and K_i;
    vars i_K1 and i_K1;
  enddef;
  def map between L_type_calcium_current and intracellular_sodium_concentration for
    vars Na_i and Na_i;
    vars i_Ca_L_Na and i_Ca_L_Na;
  enddef;
  def map between L_type_calcium_current and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between L_type_calcium_current and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
    vars i_Ca_L_Ca and i_Ca_L_Ca;
  enddef;
  def map between L_type_calcium_current and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between L_type_calcium_current and extracellular_potassium_concentration for
    vars K_c and K_c;
  enddef;
  def map between L_type_calcium_current and intracellular_potassium_concentration for
    vars K_i and K_i;
    vars i_Ca_L_K and i_Ca_L_K;
  enddef;
  def map between transient_outward_current and extracellular_potassium_concentration for
    vars K_c and K_c;
  enddef;
  def map between transient_outward_current and intracellular_potassium_concentration for
    vars K_i and K_i;
    vars i_to and i_to;
  enddef;
  def map between transient_outward_current and potassium_background_current for
    vars E_K and E_K;
  enddef;
  def map between transient_outward_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between sarcoplasmic_reticulum_calcium_pump and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
    vars i_up and i_up;
    vars Ca_up and Ca_up;
  enddef;
  def map between calcium_release and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
    vars Ca_rel and Ca_rel;
    vars i_rel and i_rel;
  enddef;
  def map between calcium_translocation and intracellular_calcium_concentration for
    vars Ca_up and Ca_up;
    vars Ca_rel and Ca_rel;
    vars i_trans and i_trans;
  enddef;
  def map between intracellular_sodium_concentration and intracellular_calcium_concentration for
    vars V_i and V_i;
  enddef;
  def map between intracellular_potassium_concentration and intracellular_calcium_concentration for
    vars V_i and V_i;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars time and time;
    vars V and V;
    vars Ca_i and Ca_i;
    vars CaChon and CaChon;
  enddef;
  def map between transient_outward_current and transient_outward_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
enddef;
