//   FILE :  mitochondria_and_Ca_signaling_2001.xml
//
// CREATED :  14th January 2002
//
// LAST MODIFIED : 12th August 2003
//
// AUTHOR :  Catherine Lloyd
//           Department of Engineering Science
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Fall and Keizer's
// 2001 model of mitochondrial modulation of intracellular Ca2+ signaling.
//
// CHANGES:
//   21/01/2002 - AAC - Updated metadata to conform to the 16/1/02 CellML Metadata
//                      1.0 Specification.
//   26/02/2002 - CML - Corrected several equations.
//   01/03/2002 - CML - Corrected units.
//   22/07/2002 - CML - Added more metadata.
//   09/04/2003 - AAC - Added publication date information.
//   12/08/2003 - CML - Corrected equations.
// publisher: The University of Auckland, Bioengineering Research Group
// modification: W3CDTF 2002-01-21; Updated metadata to conform to the 16/1/02 CellML Metadata 1.0 Specification.; Given Autumn; Family Cuellar; Other A.
// modification: W3CDTF 2003-04-09; Added publication date information.; Given Autumn; Family Cuellar; Other A
// modification: W3CDTF 2003-08-12; Corrected equations: J_uni in Ca_uniporter component, JH_F1 in F0_F1_ATPase component.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2002-07-22; Added more metadata.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2002-02-26; Corrected several equations.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2002-03-01; Corrected units.; Given Catherine; Family Lloyd; Other May
// created: W3CDTF 2002-01-14
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Research Group; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: Mitochondrial modulation of intracellular Ca2+ signaling
// bio_entity: Pancreatic Beta-cell
// comment: FN Catherine Lloyd; This is the CellML description of Christopher Fall and Joel Keizer's 2001 model of mitochondrial modulation of Ca2+ signaling. They combine the previously separate models of mitochondrial Ca2+ handling and IP3-dependent Ca2+ release from the ER into a single, comprehensive model.
// reference: Pubmed_id 11371172; Given Christopher; Family Fall; Other P; Given Joel; Family Keizer; Other E; title Mitochondrial Modulation of Intracellular Ca2+ Signalling; volume 210; first_page 151; title Journal of theoretical Biology; W3CDTF 2001-05-21; last_page 165
// reference: subject_type keyword; mitochondria; IP3; signal transduction; Pancreatic Beta-Cell; calcium dynamics; ip3; electrophysiology; beta cell
def model fall_keizer_2001_version01 as
  // Mitochondria And Ca2+ Signalling
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This is the original unchecked version of the model imported from the previous CellML model repository, 24-Jan-2006.
  //
  // Model Structure
  //
  // In 2001 Christopher Fall and Joel Keizer published a detailed mathematical model to describe mitochondrial function and mitochondrial Ca2+ handling coupled to endoplasmic reticulum (ER) based IP3-dependent Ca2+ release. Their aim was to create a biologically realistic model of the influence of mitochondria on IP3-mediated Ca2+ signaling. They aimed to integrate the separate IP3 receptor/channel (DeYoung-Keizer 1992) (${HTML_EXMPL_IP3_CA2+_MODEL}) and mitochondrial Ca2+ handling (Magnus-Keizer 1997, 1998) (${HTML_EXMPL_MITOCHONDRIAL_CA_HANDLING}) models into a single, common framework (see below).
  //
  // The complete original paper reference is cited below:
  //
  // Mitochondrial Modulation of Intracellular Ca2+ Signaling (http://www.sciencedirect.com/science?_ob=ArticleURL&_udi=B6WMD-457VD48-2X&_user=140507&_coverDate=05%2F21%2F2001&_alid=187119092&_rdoc=1&_fmt=summary&_orig=search&_qd=1&_cdi=6932&_sort=d&_docanchor=&view=c&_acct=C000011498&_version=1&_urlVersion=0&_userid=140507&md5=c1b4b6377cc0e91c539a5f2046bd18e0), Christopher P. Fall and Joel E. Keizer, 2001, J. theor. Biol. (http://www.sciencedirect.com/science?_ob=JournalURL&_cdi=6932&_auth=y&_acct=C000011498&_version=1&_urlVersion=0&_userid=140507&md5=c8e64d20ff203cda2255f4b6b7affe4f), 210, 151-165. (A full text (html) (http://www.sciencedirect.com/science?_ob=ArticleURL&_udi=B6WMD-457VD48-2X&_coverDate=05%2F21%2F2001&_alid=187119092&_rdoc=1&_fmt=&_orig=search&_qd=1&_cdi=6932&_sort=d&view=c&_acct=C000011498&_version=1&_urlVersion=0&_userid=140507&md5=c6160e53309599f9017868cecfd56646) and PDF versions of the article are available to subscribers on the Science Direct website.) PubMed ID: 11371172 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=11371172&dopt=Abstract)
  //
  // The raw CellML description of the mitochondria and Ca2+ signaling model can be downloaded in various formats as described in . For an example of a more complete documentation for an electrophysiological model, see The Hodgkin-Huxley Squid Axon Model, 1952 (${HTML_EXMPL_HHSA_INTRO}).
  //
  // diagram of the mitochondria and Ca2+ signaling model
  //
  // Key components of the IP3-mediated intracellular Ca2+ signaling diagram shows endoplasmic reticulum based Ca2+ release and uptake mechanisms, mitochondrial Ca2+ release and uptake mechanisms, in addition to other components which are not included in the mathematical model.
  //
  // the cellml rendering of the mitochondria and Ca2+ signaling model
  //
  // The network defined in the CellML description of the mitochondria and Ca2+ signaling model.
  // Below, we define some additional units for association with variables and
  // constants within the model. The identifiers are fairly self-explanatory.
  def unit minute as
    unit second {mult: 60.0};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit nanomole_per_mg as
    unit mole {pref: nano};
    unit gram {pref: milli, expo: -1};
  enddef;
  def unit nanomole_per_minute_per_mg as
    unit mole {pref: nano};
    unit minute {expo: -1};
    unit gram {pref: milli, expo: -1};
  enddef;
  def unit nanomole_per_minute_per_millimolar as
    unit mole {pref: nano};
    unit minute {expo: -1};
    unit millimolar {expo: -1};
  enddef;
  def unit milligram as
    unit gram {pref: milli};
  enddef;
  def unit millilitre as
    unit litre {pref: milli};
  enddef;
  def unit capacitance_units as
    unit mole {pref: nano};
    unit millivolt {expo: -1};
    unit gram {pref: milli, expo: -1};
  enddef;
  def unit conductance_units as
    unit mole {pref: nano};
    unit minute {expo: -1};
    unit millivolt {expo: -1};
    unit gram {pref: milli, expo: -1};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  // The "environment" component is used to declare variables that are used by
  // all or most of the other components, in this case just "time".

  def comp environment as
    var time: minute {pub: out};
  enddef;
  // The "membrane" component is really the `root' node of our model.

  def comp membrane as
    var V: millivolt {pub: out};
    var V_B: millivolt {pub: out, init: 50.0};
    var R: millijoule_per_mole_kelvin {pub: out, init: 8314.0};
    var T: kelvin {pub: out, init: 310.0};
    var F: coulomb_per_mole {pub: out, init: 96845.0};
    var delta_pH: dimensionless {pub: out, init: -0.4};
    var proton_motive_force: nanomole_per_minute_per_mg {pub: out};
    var g_H: conductance_units {pub: out, init: 0.2};
    var C: capacitance_units {init: 0.00145};
    var pH_i: dimensionless;
    var pH_m: dimensionless;
    var JH_res: nanomole_per_minute_per_mg {pub: in};
    var JH_leak: nanomole_per_minute_per_mg {pub: in};
    var JH_F1: nanomole_per_minute_per_mg {pub: in};
    var J_ant: nanomole_per_minute_per_mg {pub: in};
    var J_uni: nanomole_per_minute_per_mg {pub: in};
    var time: minute {pub: in};
    ode(V, time) = -1.0{dimensionless}/C*(JH_F1+J_ant+JH_leak+J_uni*2.0{dimensionless}-JH_res);
    delta_pH = pH_i-pH_m;
    proton_motive_force = V-2.303{dimensionless}*R*T/F*delta_pH;
  enddef;
  // Mitochondrial Ca2+ handling components.

  def comp Ca_uniporter as
    var J_uni: nanomole_per_minute_per_mg {pub: out};
    var V_offset: millivolt {pub: out, init: 91.0};
    var Jmax_uni: nanomole_per_minute_per_mg {init: 300.0};
    var K_trans: micromolar {init: 19.0};
    var K_act: micromolar {init: 0.38};
    var L: dimensionless {init: 110.0};
    var na: dimensionless {init: 2.8};
    var Ca_i: nanomolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: minute {pub: in};
    J_uni = Jmax_uni*(Ca_i/K_trans*pow(1.0{dimensionless}+Ca_i/K_trans, 3.0{dimensionless})/(pow(1.0{dimensionless}+Ca_i/K_trans, 4.0{dimensionless})+L/pow(1.0{dimensionless}+Ca_i/K_act, na)))*(2.0{dimensionless}*F*(V-V_offset)/(R*T)/(1.0{dimensionless}-exp(-2.0{dimensionless}*F*(V-V_offset)/(R*T))));
  enddef;

  def comp Na_Ca_exchanger as
    var K_Ca: nanomole_per_mg {pub: out, init: 0.003};
    var J_Na_Ca: nanomole_per_minute_per_mg {pub: out};
    var Jmax_Na_Ca: nanomole_per_minute_per_mg {init: 25.0};
    var Na_i: millimolar {init: 30.0};
    var K_Na: millimolar {init: 9.4};
    var b: dimensionless {init: 0.0};
    var n: dimensionless {init: 2.0};
    var Ca_m: nanomolar {pub: in};
    var V_offset: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: minute {pub: in};
    J_Na_Ca = Jmax_Na_Ca*(exp(b*F*(V-V_offset)/(R*T))/(pow(1.0{dimensionless}+K_Na/Na_i, n)*(1.0{dimensionless}+K_Ca/Ca_m)));
  enddef;
  // Mitochondrial components that do not transport Ca2+.

  def comp proton_pump as
    var JH_res: nanomole_per_minute_per_mg {pub: out};
    var Jo: nanomole_per_minute_per_mg {pub: out};
    var A_res: dimensionless;
    var K_res: millimolar {init: 13500000000000000.0};
    var rho_res: nanomole_per_mg {init: 0.4};
    var r1: dimensionless {init: 0.000000000000000002077};
    var r2: dimensionless {init: 0.000000001728};
    var r3: dimensionless {init: 0.00000000000000000000000001059};
    var ra: per_second {init: 0.0000000006394};
    var rb: per_second {init: 0.0000000000001762};
    var rc1: per_second {init: 0.0000000000000000002656};
    var rc2: per_second {init: 0.000000000000000000000000008632};
    var g: dimensionless {init: 0.85};
    var delta_pH: dimensionless {pub: in};
    var NAD_m: nanomolar {pub: in};
    var NADH_m: nanomolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var V_B: millivolt {pub: in};
    var time: minute {pub: in};
    JH_res = 360.0{dimensionless}*rho_res*((ra*pow(10.0{dimensionless}, 6.0{dimensionless}*delta_pH)*exp(F*A_res/(R*T))+rb*pow(10.0{dimensionless}, 6.0{dimensionless}*delta_pH)-(ra+rb)*exp(g*6.0{dimensionless}*F*V/(R*T)))/((1.0{dimensionless}+r1*exp(F*A_res/(R*T)))*exp(6.0{dimensionless}*F*V_B/(R*T))+(r2+r3*exp(F*A_res/(R*T)))*exp(g*6.0{dimensionless}*F*V/(R*T))));
    Jo = 30.0{dimensionless}*rho_res*(((ra*pow(10.0{dimensionless}, 6.0{dimensionless}*delta_pH)+rc1*exp(6.0{dimensionless}*F*V_B/(R*T)))*exp(F*A_res/(R*T))-ra*exp(g*6.0{dimensionless}*F*V/(R*T))+rc2*exp(F*A_res/(R*T))*exp(g*6.0{dimensionless}*F*V/(R*T)))/((1.0{dimensionless}+r1*exp(F*A_res/(R*T)))*exp(6.0{dimensionless}*F*V_B/(R*T))+(r2+r3*exp(F*A_res/(R*T)))*exp(g*6.0{dimensionless}*F*V/(R*T))));
    A_res = R*T/F*ln(K_res*sqrt(NADH_m)/sqrt(NAD_m));
  enddef;

  def comp proton_leak as
    var JH_leak: nanomole_per_minute_per_mg {pub: out};
    var g_H: conductance_units {pub: in};
    var proton_motive_force: nanomole_per_minute_per_mg {pub: in};
    var time: minute {pub: in};
    JH_leak = g_H*proton_motive_force;
  enddef;

  def comp F0_F1_ATPase as
    var JH_F1: nanomole_per_minute_per_mg {pub: out};
    var Jp_F1: nanomole_per_minute_per_mg {pub: out};
    var rho_F1: nanomole_per_mg {init: 0.7};
    var K_F1: millimolar {init: 1710000.0};
    var A_F1: dimensionless;
    var ADP_m_free: nanomolar;
    var Pi_m: millimolar {init: 20.0};
    var p1: dimensionless {init: 0.00000001346};
    var p2: dimensionless {init: 0.0000007739};
    var p3: dimensionless {init: 0.00000000000000665};
    var pa: per_second {init: 0.00001656};
    var pb: per_second {init: 0.0000003373};
    var pc1: per_second {init: 0.00000000000009651};
    var pc2: per_second {init: 0.0000000000000000004845};
    var ATP_m: nanomolar {pub: in};
    var ADP_m: nanomolar {pub: in};
    var delta_pH: dimensionless {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var V_B: millivolt {pub: in};
    var time: minute {pub: in};
    JH_F1 = -180.0{dimensionless}*rho_F1*((pa*pow(10.0{dimensionless}, 3.0{dimensionless}*delta_pH)*exp(F*A_F1/(R*T))+pb*pow(10.0{dimensionless}, 3.0{dimensionless}*delta_pH)-(pa+pb)*exp(3.0{dimensionless}*F*V/(R*T)))/((1.0{dimensionless}+p1*exp(F*A_F1/(R*T)))*exp(3.0{dimensionless}*F*V_B/(R*T))+(p2+p3*exp(F*A_F1/(R*T)))*exp(3.0{dimensionless}*F*V/(R*T))));
    Jp_F1 = -60.0{dimensionless}*rho_F1*(((pa*pow(10.0{dimensionless}, 3.0{dimensionless}*delta_pH)+pc1*exp(3.0{dimensionless}*F*V_B/(R*T)))*exp(F*A_F1/(R*T))-pa*exp(3.0{dimensionless}*F*V/(R*T))+pc2*exp(F*A_F1/(R*T))*exp(3.0{dimensionless}*F*V/(R*T)))/((1.0{dimensionless}+p1*exp(F*A_F1/(R*T)))*exp(3.0{dimensionless}*F*V_B/(R*T))+(p2+p3*exp(F*A_F1/(R*T)))*exp(3.0{dimensionless}*F*V/(R*T))));
    A_F1 = R*T/F*ln(K_F1*ATP_m/(ADP_m_free*Pi_m));
    ADP_m_free = 0.8{dimensionless}*ADP_m;
  enddef;

  def comp ATP_ADP_exchange as
    var J_ant: nanomole_per_minute_per_mg {pub: out};
    var Jmax_ant: nanomole_per_minute_per_mg {init: 1000.0};
    var f: dimensionless {init: 0.5};
    var ADP_i: nanomolar {pub: in};
    var ADP_m: nanomolar {pub: in};
    var ATP_i: nanomolar {pub: in};
    var ATP_m: nanomolar {pub: in};
    var Jp_F1: nanomole_per_minute_per_mg {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: minute {pub: in};
    J_ant = Jmax_ant*((1.0{dimensionless}-ATP_i*ADP_m/(ADP_i*ATP_m)*exp(-F*V/(R*T)))/((1.0{dimensionless}+ATP_i/ADP_i*exp(-f*F*V/(R*T)))*(1.0{dimensionless}+ADP_m/ATP_m)));
  enddef;

  def comp NAD_reduction as
    var J_red: nanomole_per_minute_per_mg {pub: out};
    var J_red_basal: nanomole_per_minute_per_mg {pub: out, init: 20.0};
    var f_PDHa: dimensionless {pub: out};
    var u1: dimensionless {init: 15.0};
    var u2: dimensionless {init: 1.1};
    var J_gly_tot: nanomole_per_minute_per_mg {pub: in};
    var K_Ca: nanomole_per_mg {pub: in};
    var Ca_m: nanomolar {pub: in};
    var time: minute {pub: in};
    f_PDHa = 1.0{dimensionless}/(1.0{dimensionless}+u2*(1.0{dimensionless}+u1*pow(1.0{dimensionless}+Ca_m/K_Ca, -2.0{dimensionless})));
    J_red = J_red_basal+7.36{dimensionless}*f_PDHa*J_gly_tot;
  enddef;

  def comp TCA_cycle_ADP_phosphorylation as
    var J_ptca: nanomole_per_minute_per_mg {pub: out};
    var f_PDHa: dimensionless {pub: in};
    var J_red_basal: nanomole_per_minute_per_mg {pub: in};
    var J_gly_tot: nanomole_per_minute_per_mg {pub: in};
    var time: minute {pub: in};
    J_ptca = J_red_basal/3.0{dimensionless}+0.84{dimensionless}*f_PDHa*J_gly_tot;
  enddef;
  // Cytosolic componets.

  def comp glycolytic_phosphorylation_of_ADP as
    var J_gly_tot: nanomole_per_minute_per_mg {pub: out};
    var Glc: nanomolar {pub: out, init: 25.0};
    var beta_max: nanomole_per_minute_per_millimolar {init: 126.0};
    var beta_1: per_millimolar {init: 1.66};
    var beta_3: per_millimolar {init: 4.0};
    var beta_4: per_millimolar {init: 2.83};
    var beta_5: per_millimolar {init: 1.3};
    var beta_6: per_millimolar {init: 2.66};
    var beta_7: per_millimolar {init: 0.16};
    var ATP_i: nanomolar {pub: in};
    var time: minute {pub: in};
    J_gly_tot = beta_max*(1.0{dimensionless}+beta_1*Glc)*Glc*ATP_i/(1.0{dimensionless}+beta_3*ATP_i+1.0{dimensionless}+beta_4*ATP_i)*(beta_5*Glc+1.0{dimensionless}+beta_6*ATP_i+beta_7*sqr(Glc));
  enddef;

  def comp hydrolysis_of_ATP as
    var J_hyd: nanomole_per_minute_per_mg {pub: out};
    var J_hyd_ss: nanomole_per_minute_per_mg;
    var Jmax_hyd: nanomole_per_minute_per_mg {init: 30.1};
    var k_hyd: per_millimolar;
    var K_Glc: millimolar {init: 8.7};
    var n_hyd: dimensionless {init: 2.7};
    var Glc: nanomolar {pub: in};
    var ATP_i: nanomolar {pub: in};
    var time: minute {pub: in};
    J_hyd = k_hyd*ATP_i+J_hyd_ss;
    J_hyd_ss = Jmax_hyd/(1.0{dimensionless}+pow(K_Glc/Glc, n_hyd));
  enddef;
  // ER Ca2+ handling components.

  def comp Ca_release_from_the_ER as
    var J_erout: nanomole_per_minute_per_mg {pub: out};
    var Jmax_IP3: nanomole_per_minute_per_mg {init: 3000.0};
    var d_IP3: micromolar {init: 0.25};
    var d_ACT: micromolar {init: 1.0};
    var IP3: nanomolar;
    var h: dimensionless {pub: in};
    var JH_leak: nanomole_per_minute_per_mg {pub: in};
    var Ca_i: nanomolar {pub: in};
    var Ca_ER: nanomolar {pub: in};
    var time: minute {pub: in};
    J_erout = (Jmax_IP3*pow(IP3/(IP3+d_IP3), 3.0{dimensionless})*pow(Ca_i/(Ca_i+d_ACT), 3.0{dimensionless})*pow(h, 3.0{dimensionless})+JH_leak)*(Ca_ER-Ca_i);
  enddef;

  def comp pumping_Ca_into_the_ER as
    var J_serca: nanomole_per_minute_per_mg {pub: out};
    var Jmax_serca: nanomole_per_minute_per_mg {init: 110.0};
    var k_serca: micromolar {init: 0.4};
    var Ca_i: nanomolar {pub: in};
    var time: minute {pub: in};
    J_serca = Jmax_serca*(sqr(Ca_i)/(sqr(k_serca)+sqr(Ca_i)));
  enddef;

  def comp differential_equations as
    var NADH_m: nanomolar {pub: out};
    var NAD_m: nanomolar {pub: out};
    var ADP_m: nanomolar {pub: out};
    var ATP_m: nanomolar {pub: out};
    var ADP_i: nanomolar {pub: out};
    var ATP_i: nanomolar {pub: out};
    var Ca_m: nanomolar {pub: out};
    var Ca_ER: nanomolar {pub: out};
    var Ca_i: nanomolar {pub: out};
    var h: dimensionless {pub: out};
    var total_mitochondrial_adenosine_phosphate: nanomolar {init: 12.0};
    var total_NAD_m: nanomolar {init: 8.0};
    var C: milligram {init: 37.5};
    var M: milligram {init: 50.0};
    var E: milligram {init: 100.0};
    var Vc: millilitre {init: 0.5};
    var Vm: millilitre {init: 0.05};
    var Ve: millilitre {init: 0.1};
    var fc: dimensionless {init: 0.01};
    var fm: dimensionless {init: 0.0003};
    var fe: dimensionless {init: 0.01};
    var d_INH: micromolar {init: 1.4};
    var tau: second {init: 4.0};
    var J_red: nanomole_per_minute_per_mg {pub: in};
    var Jo: nanomole_per_minute_per_mg {pub: in};
    var J_ant: nanomole_per_minute_per_mg {pub: in};
    var J_ptca: nanomole_per_minute_per_mg {pub: in};
    var Jp_F1: nanomole_per_minute_per_mg {pub: in};
    var J_hyd: nanomole_per_minute_per_mg {pub: in};
    var J_gly_tot: nanomole_per_minute_per_mg {pub: in};
    var JH_res: nanomole_per_minute_per_mg {pub: in};
    var JH_F1: nanomole_per_minute_per_mg {pub: in};
    var JH_leak: nanomole_per_minute_per_mg {pub: in};
    var J_uni: nanomole_per_minute_per_mg {pub: in};
    var J_Na_Ca: nanomole_per_minute_per_mg {pub: in};
    var J_serca: nanomole_per_minute_per_mg {pub: in};
    var J_erout: nanomole_per_minute_per_mg {pub: in};
    var time: minute {pub: in};
    ode(NADH_m, time) = M*(J_red-Jo)/Vm;
    total_NAD_m = NADH_m+NAD_m;
    NAD_m = total_NAD_m-NADH_m;
    ode(ADP_m, time) = M*(J_ant-(J_ptca+Jp_F1))/Vm;
    total_mitochondrial_adenosine_phosphate = ATP_m+ADP_m;
    ATP_m = total_mitochondrial_adenosine_phosphate-ADP_m;
    ode(ADP_i, time) = (-M*J_ant+C*(J_hyd-J_gly_tot))/Vc;
    ATP_i = 2.0{millimolar}-ADP_i;
    ode(Ca_m, time) = fm*M*(J_uni-J_Na_Ca)/Vm;
    ode(Ca_ER, time) = fe*E*(J_serca-J_erout)/Ve;
    ode(Ca_i, time) = fc*(M*(J_Na_Ca-J_uni)-E*(J_serca-J_erout))/Vc;
    ode(h, time) = (d_INH-(Ca_i+d_INH)*h)/tau;
  enddef;

  def group as containment for
    comp membrane incl
      comp proton_pump;
      comp proton_leak;
      comp F0_F1_ATPase;
      comp ATP_ADP_exchange;
      comp Ca_uniporter;
      comp Na_Ca_exchanger;
      comp NAD_reduction;
      comp TCA_cycle_ADP_phosphorylation;
      comp glycolytic_phosphorylation_of_ADP;
      comp hydrolysis_of_ATP;
      comp Ca_release_from_the_ER;
      comp pumping_Ca_into_the_ER;
      comp differential_equations;
    endcomp;
  enddef;
  // "Time" is passed from the "environment" component into all other components.
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between environment and proton_pump for
    vars time and time;
  enddef;
  def map between environment and proton_leak for
    vars time and time;
  enddef;
  def map between environment and F0_F1_ATPase for
    vars time and time;
  enddef;
  def map between environment and ATP_ADP_exchange for
    vars time and time;
  enddef;
  def map between environment and Ca_uniporter for
    vars time and time;
  enddef;
  def map between environment and Na_Ca_exchanger for
    vars time and time;
  enddef;
  def map between environment and NAD_reduction for
    vars time and time;
  enddef;
  def map between environment and TCA_cycle_ADP_phosphorylation for
    vars time and time;
  enddef;
  def map between environment and glycolytic_phosphorylation_of_ADP for
    vars time and time;
  enddef;
  def map between environment and hydrolysis_of_ATP for
    vars time and time;
  enddef;
  def map between environment and Ca_release_from_the_ER for
    vars time and time;
  enddef;
  def map between environment and pumping_Ca_into_the_ER for
    vars time and time;
  enddef;
  def map between environment and differential_equations for
    vars time and time;
  enddef;
  // Several variables are passed between the "membrane" and its sub-components.
  def map between membrane and proton_pump for
    vars JH_res and JH_res;
    vars delta_pH and delta_pH;
    vars V and V;
    vars V_B and V_B;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and proton_leak for
    vars JH_leak and JH_leak;
    vars g_H and g_H;
    vars proton_motive_force and proton_motive_force;
  enddef;
  def map between membrane and F0_F1_ATPase for
    vars JH_F1 and JH_F1;
    vars delta_pH and delta_pH;
    vars V and V;
    vars V_B and V_B;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and ATP_ADP_exchange for
    vars J_ant and J_ant;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and Ca_uniporter for
    vars J_uni and J_uni;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  // A few variables are passed between the sibling components.
  def map between Ca_uniporter and Na_Ca_exchanger for
    vars V_offset and V_offset;
  enddef;
  def map between Ca_uniporter and differential_equations for
    vars J_uni and J_uni;
    vars Ca_i and Ca_i;
  enddef;
  def map between Na_Ca_exchanger and NAD_reduction for
    vars K_Ca and K_Ca;
  enddef;
  def map between Na_Ca_exchanger and differential_equations for
    vars J_Na_Ca and J_Na_Ca;
    vars Ca_m and Ca_m;
  enddef;
  def map between proton_pump and differential_equations for
    vars JH_res and JH_res;
    vars Jo and Jo;
    vars NAD_m and NAD_m;
    vars NADH_m and NADH_m;
  enddef;
  def map between proton_leak and Ca_release_from_the_ER for
    vars JH_leak and JH_leak;
  enddef;
  def map between proton_leak and differential_equations for
    vars JH_leak and JH_leak;
  enddef;
  def map between F0_F1_ATPase and differential_equations for
    vars JH_F1 and JH_F1;
    vars Jp_F1 and Jp_F1;
    vars ADP_m and ADP_m;
    vars ATP_m and ATP_m;
  enddef;
  def map between F0_F1_ATPase and ATP_ADP_exchange for
    vars Jp_F1 and Jp_F1;
  enddef;
  def map between ATP_ADP_exchange and differential_equations for
    vars J_ant and J_ant;
    vars ADP_m and ADP_m;
    vars ATP_m and ATP_m;
    vars ADP_i and ADP_i;
    vars ATP_i and ATP_i;
  enddef;
  def map between NAD_reduction and differential_equations for
    vars J_red and J_red;
    vars Ca_m and Ca_m;
  enddef;
  def map between NAD_reduction and TCA_cycle_ADP_phosphorylation for
    vars J_red_basal and J_red_basal;
    vars f_PDHa and f_PDHa;
  enddef;
  def map between NAD_reduction and glycolytic_phosphorylation_of_ADP for
    vars J_gly_tot and J_gly_tot;
  enddef;
  def map between TCA_cycle_ADP_phosphorylation and differential_equations for
    vars J_ptca and J_ptca;
  enddef;
  def map between TCA_cycle_ADP_phosphorylation and glycolytic_phosphorylation_of_ADP for
    vars J_gly_tot and J_gly_tot;
  enddef;
  def map between glycolytic_phosphorylation_of_ADP and differential_equations for
    vars J_gly_tot and J_gly_tot;
    vars ATP_i and ATP_i;
  enddef;
  def map between glycolytic_phosphorylation_of_ADP and hydrolysis_of_ATP for
    vars Glc and Glc;
  enddef;
  def map between hydrolysis_of_ATP and differential_equations for
    vars J_hyd and J_hyd;
    vars ATP_i and ATP_i;
  enddef;
  def map between Ca_release_from_the_ER and differential_equations for
    vars J_erout and J_erout;
    vars Ca_i and Ca_i;
    vars Ca_ER and Ca_ER;
    vars h and h;
  enddef;
  def map between pumping_Ca_into_the_ER and differential_equations for
    vars J_serca and J_serca;
    vars Ca_i and Ca_i;
  enddef;
enddef;
