// This CellML file was generated on 06/05/2009 at 19:30:26 using:
//
// COR (0.9.31.1207)
// Copyright 2002-2009 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// comment: FN Catherine Lloyd; This model is known to run in OpenCell and COR to reproduce the published results. Units have been checked. COR reports they are balanced and consistent while OpenCell is reporting some inconsistencies. OpenCell is currently having unit "issues" and we believe the units are correct in this CellML model.
// created: W3CDTF 2009-06-03T00:00:00+00:00
// creator: Orgname University of Oxford; Orgunit Department of Physiology, Anatomy & Genetics; martin.fink@dpag.ox.ac.uk; Given Martin; Family Fink
// reference: Pubmed_id 17919688; Given Martin; Family Fink; Given Denis; Family Noble; Given Laszlo; Family Virag; Given Andras; Family Varro; Given Wayne; Family Giles; Other R; title Contributions of HERG K+ current to repolarization of the human ventricular action potential; volume 96; first_page 357; title Progress in Biophysics and Molecular Biology; W3CDTF 2008-01-00 00:00; last_page 376
// reference: subject_type keyword; electrophysiology; cardiac; repolarization
def model fink_noble_giles_model_2008 as
  // Contributions of HERG K+ current to repolarization of the human ventricular action potential
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This model is known to run in OpenCell and COR to reproduce the published results. Units have been checked. COR reports they are balanced and consistent while OpenCell is reporting some inconsistencies. OpenCell is currently having unit "issues" and we believe the units are correct in this CellML model.
  //
  // Model Structure
  //
  // ABSTRACT: Action potential repolarization in the mammalian heart is governed by interactions of a number of time- and voltage-dependent channel-mediated currents, as well as contributions from the Na+/Ca2+ exchanger and the Na+/K+ pump. Recent work has shown that one of the K+ currents (HERG) which contributes to repolarization in mammalian ventricle is a locus at which a number of point mutations can have significant functional consequences. In addition, the remarkable sensitivity of this K+ channel isoform to inhibition by a variety of pharmacological agents and clinical drugs has resulted in HERG being a major focus for Safety Pharmacology requirements. For these reasons we and others have attempted to define the functional role for HERG-mediated K+ currents in repolarization of the action potential in the human ventricle. Here, we describe and evaluate changes in the formulations for two K+ currents, IK1 and HERG (or IK,r), within the framework of ten Tusscher model of the human ventricular action potential. In this computational study, new mathematical formulations for the two nonlinear K+ conductances, IK1 and HERG, have been developed based upon experimental data obtained from electrophysiological studies of excised human ventricular tissue and/or myocytes. The resulting mathematical model provides much improved simulations of the relative sizes and time courses of the K+ currents which modulate repolarization. Our new formulation represents an important first step in defining the mechanism(s) of repolarization of the membrane action potential in the human ventricle. Our overall goal is to understand the genesis of the T-wave of the human electrocardiogram.
  //
  // The complete original paper reference is cited below:
  //
  // Contributions of HERG K+ current to repolarization of the human ventricular action potential, Martin Fink, Denis Noble, Laszlo Virag, Andras Varro, and Wayne R. Giles, 2008, Progress in Biophysics and Molecular Biology 96, (1-3), 357-376. PubMed ID: 17919688 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=17919688&dopt=Abstract)
  //
  // cell diagram
  //
  // A schematic diagram describing the ion movement across the cell surface membrane and the sarcoplasmic reticulum, which are described by the Fink et al. 2008 mathematical model of the human ventricular myocyte.
  def unit nanolitre as
    unit litre {pref: nano};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millivolt2 as
    unit millivolt {expo: 2};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit milliS as
    unit siemens {pref: milli};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit nanoF as
    unit farad {pref: nano};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit microS_per_nanoF as
    unit microS;
    unit nanoF {expo: -1};
  enddef;
  def unit nanoA_per_nanoF as
    unit nanoA;
    unit nanoF {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit millimolar as
    unit molar {pref: milli};
  enddef;
  def unit millivolt_per_millimolar as
    unit millivolt;
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit per_millisecond;
  enddef;
  def unit per_millimolar_per_millisecond as
    unit millimolar {expo: -1};
    unit per_millisecond;
  enddef;
  def unit per_millimolar2_per_millisecond as
    unit millimolar {expo: -2};
    unit per_millisecond;
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit litre_per_farad_millisecond as
    unit litre;
    unit farad {expo: -1};
    unit per_millisecond;
  enddef;

  def comp Environment as
    var time: millisecond {pub: out};
    var R: millijoule_per_mole_kelvin {pub: out, init: 8314.472};
    var T: kelvin {pub: out, init: 310};
    var F: coulomb_per_mole {pub: out, init: 96485.3415};
    var K_o: millimolar {pub: out, init: 5.4};
    var Ca_o: millimolar {pub: out, init: 2};
    var Na_o: millimolar {pub: out, init: 140};
  enddef;

  def comp cell as
    var V: millivolt {pub: out, init: -86.45};
    var Cm: nanoF {pub: out, init: 0.115};
    var Vol_c: nanolitre {pub: out, init: 0.016404};
    var time: millisecond {pub: in};
    var i_K1: nanoA_per_nanoF {pub: in};
    var i_to: nanoA_per_nanoF {pub: in};
    var i_Kr: nanoA_per_nanoF {pub: in};
    var i_Ks: nanoA_per_nanoF {pub: in};
    var i_CaL: nanoA_per_nanoF {pub: in};
    var i_NaK: nanoA_per_nanoF {pub: in};
    var i_Na: nanoA_per_nanoF {pub: in};
    var i_b_Na: nanoA_per_nanoF {pub: in};
    var i_NaCa: nanoA_per_nanoF {pub: in};
    var i_b_Ca: nanoA_per_nanoF {pub: in};
    var i_p_K: nanoA_per_nanoF {pub: in};
    var i_p_Ca: nanoA_per_nanoF {pub: in};
    var i_Stim: nanoA_per_nanoF {pub: out};
    var i_tot: nanoA_per_nanoF;
    var stim_Period: millisecond {init: 1000};
    i_Stim = sel
      case (time-floor(time/stim_Period)*stim_Period >= 100{millisecond}) and (time-floor(time/stim_Period)*stim_Period <= 103{millisecond}):
        -12{nanoA_per_nanoF};
      otherwise:
        0{nanoA_per_nanoF};
    endsel;
    i_tot = i_K1+i_to+i_Kr+i_Ks+i_CaL+i_NaK+i_Na+i_b_Na+i_NaCa+i_b_Ca+i_p_K+i_p_Ca+i_Stim;
    ode(V, time) = -i_tot;
  enddef;

  def comp reversal_potentials as
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ks: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    var P_kna: dimensionless {init: 0.03};
    var K_o: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {pub: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ks = R*T/F*ln((K_o+P_kna*Na_o)/(K_i+P_kna*Na_i));
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Ca_o/Ca_i);
  enddef;

  def comp IK1 as
    var i_K1: nanoA_per_nanoF {pub: out};
    var g_K1_0: microS_per_nanoF {init: 0.6821};
    var time: millisecond {pub: in, priv: out};
    var E_K: millivolt {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var T: kelvin {pub: in};
    var K_o: millimolar {pub: in};
    var xK1_inf: dimensionless {priv: in};
    i_K1 = g_K1_0*(T/35{kelvin}-55{kelvin}/7{kelvin})*sqrt(K_o/5.4{millimolar})*xK1_inf*(V-E_K);
  enddef;

  def comp iK1_rectification as
    var xK1_inf: dimensionless {pub: out};
    var Mg_Buf: millimolar {init: 0.0356};
    var SPM: millimolar {init: 1.4613e-3};
    var fac: dimensionless {init: 1.0648};
    var phi: dimensionless {init: 0.8838};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var temp: dimensionless;
    var rec1: dimensionless;
    var rec2: dimensionless;
    var KiMg: millimolar;
    var KbMg: millimolar;
    var Kd1SPM: millimolar;
    var Kd2SPM: millimolar;
    KiMg = 2.8{millimolar}*exp(-(V-fac*E_K)/180{millivolt});
    KbMg = 0.45{millimolar}*exp(-(V-fac*E_K)/20{millivolt});
    Kd1SPM = 0.7e-3{millimolar}*exp(-(V-fac*E_K+8{millivolt_per_millimolar}*Mg_Buf)/4.8{millivolt});
    Kd2SPM = 40e-3{millimolar}*exp(-(V-fac*E_K)/9.1{millivolt});
    temp = 1{dimensionless}+Mg_Buf/KbMg;
    rec1 = temp*temp/(SPM/Kd1SPM+Mg_Buf/KiMg+temp*temp*temp);
    rec2 = 1{dimensionless}/(1{dimensionless}+SPM/Kd2SPM);
    xK1_inf = phi*rec1+(1{dimensionless}-phi)*rec2;
  enddef;

  def comp IKr as
    var i_Kr: nanoA_per_nanoF {pub: out};
    var g_Kr_0: microS_per_nanoF {init: 0.024};
    var time: millisecond {pub: in, priv: out};
    var T: kelvin {pub: in, priv: out};
    var K_o: millimolar {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in, priv: out};
    var Or4: dimensionless {priv: in};
    i_Kr = g_Kr_0*(T/35{kelvin}-55{dimensionless}/7{dimensionless})*sqrt(K_o/5.4{millimolar})*Or4*(V-E_K);
  enddef;

  def comp iKr_Markov as
    var Cr1: dimensionless {init: 0.9786};
    var Cr2: dimensionless {init: 0.0031};
    var Cr3: dimensionless {init: 0.0029};
    var Or4: dimensionless {pub: out, priv: out, init: 0.014};
    var Ir5: dimensionless {init: 0.0014};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in};
    var K_o: millimolar {pub: in};
    var T: kelvin {pub: in};
    var T_Base: kelvin {init: 310};
    var alpha_xr1: per_millisecond {priv: out};
    var beta_xr1: per_millisecond {priv: out};
    var alpha_xr2: per_millisecond {priv: out};
    var beta_xr2: per_millisecond {priv: out};
    var alpha_xr3: per_millisecond {priv: out};
    var beta_xr3: per_millisecond {priv: out};
    var alpha_xr4: per_millisecond {priv: out};
    var beta_xr4: per_millisecond {priv: out};
    var OtoB: per_millisecond {priv: in};
    var BtoO: per_millisecond {priv: in};
    alpha_xr1 = 1{per_millisecond}*T/T_Base*exp(24.335{dimensionless}+T_Base/T*(0.0112{per_millivolt}*V-25.914{dimensionless}));
    beta_xr1 = 1{per_millisecond}*T/T_Base*exp(13.688{dimensionless}+T_Base/T*(-0.0603{per_millivolt}*V-15.707{dimensionless}));
    alpha_xr2 = 1{per_millisecond}*T/T_Base*exp(22.746{dimensionless}+T_Base/T*(0{per_millivolt}*V-25.914{dimensionless}));
    beta_xr2 = 1{per_millisecond}*T/T_Base*exp(13.193{dimensionless}+T_Base/T*(0{per_millivolt}*V-15.707{dimensionless}));
    alpha_xr3 = 1{per_millisecond}*T/T_Base*exp(22.098{dimensionless}+T_Base/T*(0.0365{per_millivolt}*V-25.914{dimensionless}));
    beta_xr3 = 1{per_millisecond}*T/T_Base*exp(7.313{dimensionless}+T_Base/T*(-0.0399{per_millivolt}*V-15.707{dimensionless}));
    alpha_xr4 = 1{per_millisecond}*T/T_Base*exp(30.016{dimensionless}+T_Base/T*(0.0223{per_millivolt}*V-30.888{dimensionless}))*pow(5.4{millimolar}/K_o, 0.4{dimensionless});
    beta_xr4 = 1{per_millisecond}*T/T_Base*exp(30.061{dimensionless}+T_Base/T*(-0.0312{per_millivolt}*V-33.243{dimensionless}));
    ode(Cr1, time) = beta_xr1*Cr2-alpha_xr1*Cr1;
    ode(Cr2, time) = alpha_xr1*Cr1+beta_xr2*Cr3-(alpha_xr2+beta_xr1)*Cr2;
    ode(Cr3, time) = alpha_xr2*Cr2+beta_xr3*Or4-(alpha_xr3+beta_xr2)*Cr3;
    ode(Or4, time) = alpha_xr3*Cr3+beta_xr4*Ir5-(alpha_xr4+beta_xr3)*Or4-OtoB+BtoO;
    ode(Ir5, time) = alpha_xr4*Or4-beta_xr4*Ir5;
  enddef;

  def comp iKr_Markov_Sotalol_block as
    var OtoB: per_millisecond {pub: out};
    var BtoO: per_millisecond {pub: out};
    var Sotalol_mM: millimolar {init: 0};
    var BCr1: dimensionless {init: 0};
    var BCr2: dimensionless {init: 0};
    var BCr3: dimensionless {init: 0};
    var BOr4: dimensionless {init: 0};
    var BIr5: dimensionless {init: 0};
    var kBinding: per_millimolar_per_millisecond {init: 5e-3};
    var kDiss: per_millisecond {init: 0.00125};
    var time: millisecond {pub: in};
    var alpha_xr1: per_millisecond {pub: in};
    var beta_xr1: per_millisecond {pub: in};
    var alpha_xr2: per_millisecond {pub: in};
    var beta_xr2: per_millisecond {pub: in};
    var alpha_xr3: per_millisecond {pub: in};
    var beta_xr3: per_millisecond {pub: in};
    var alpha_xr4: per_millisecond {pub: in};
    var beta_xr4: per_millisecond {pub: in};
    var O: dimensionless {pub: in};
    OtoB = O*Sotalol_mM*kBinding;
    BtoO = BOr4*kDiss;
    ode(BCr1, time) = beta_xr1*BCr2-alpha_xr1*BCr1;
    ode(BCr2, time) = alpha_xr1*BCr1+beta_xr2*BCr3-(alpha_xr2+beta_xr1)*BCr2;
    ode(BCr3, time) = alpha_xr2*BCr2+beta_xr3*BOr4-(alpha_xr3+beta_xr2)*BCr3;
    ode(BOr4, time) = alpha_xr3*BCr3+beta_xr4*BIr5-(alpha_xr4+beta_xr3)*BOr4+OtoB-BtoO;
    ode(BIr5, time) = alpha_xr4*BOr4-beta_xr4*BIr5;
  enddef;

  def comp IKs as
    var i_Ks: nanoA_per_nanoF {pub: out};
    var g_Ks: microS_per_nanoF {init: 0.0392};
    var E_Ks: millivolt {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Xs: dimensionless {priv: in};
    i_Ks = g_Ks*sqr(Xs)*(V-E_Ks);
  enddef;

  def comp iKs_Xs_gate as
    var Xs: dimensionless {pub: out, init: 0.00303};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xs_inf: dimensionless;
    var alpha_xs: dimensionless;
    var beta_xs: dimensionless;
    var tau_xs: millisecond;
    xs_inf = 1{dimensionless}/(1{dimensionless}+exp((-5{millivolt}-V)/14{millivolt}));
    alpha_xs = 1400{dimensionless}/sqrt(1{dimensionless}+exp((5{millivolt}-V)/6{millivolt}));
    beta_xs = 1{dimensionless}/(1{dimensionless}+exp((V-35{millivolt})/15{millivolt}));
    tau_xs = 1{millisecond}*alpha_xs*beta_xs+80{millisecond};
    ode(Xs, time) = (xs_inf-Xs)/tau_xs;
  enddef;

  def comp Ito as
    var i_to: nanoA_per_nanoF {pub: out};
    var g_to: microS_per_nanoF {init: 0.2};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in, priv: out};
    var time: millisecond {pub: in, priv: out};
    var s: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*r*s*(V-E_K);
  enddef;

  def comp ito_s_gate as
    var s: dimensionless {pub: out, init: 1};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var s_inf: dimensionless;
    var tau_s: millisecond;
    s_inf = 1{dimensionless}/(1{dimensionless}+exp((V+20{millivolt})/5{millivolt}));
    tau_s = 85{millisecond}*exp(-sqr(V+45{millivolt})/320{millivolt2})+5{millisecond}/(1{dimensionless}+exp((V-20{millivolt})/5{millivolt}))+3{millisecond};
    ode(s, time) = (s_inf-s)/tau_s;
  enddef;

  def comp ito_r_gate as
    var r: dimensionless {pub: out, init: 2.11e-8};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var r_inf: dimensionless;
    var tau_r: millisecond;
    r_inf = 1{dimensionless}/(1{dimensionless}+exp((20{millivolt}-V)/6{millivolt}));
    tau_r = 9.5{millisecond}*exp(-sqr(V+40{millivolt})/1800{millivolt2})+0.8{millisecond};
    ode(r, time) = (r_inf-r)/tau_r;
  enddef;

  def comp INa as
    var i_Na: nanoA_per_nanoF {pub: out};
    var g_Na: microS_per_nanoF {init: 11};
    var shift_INa_inact: millivolt {priv: out, init: 0};
    var E_Na: millivolt {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp iNa_m_gate as
    var m: dimensionless {pub: out, init: 0.00132};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var m_inf: dimensionless;
    var alpha_m: dimensionless;
    var beta_m: dimensionless;
    var tau_m: millisecond;
    m_inf = 1{dimensionless}/sqr(1{dimensionless}+exp((-56.86{millivolt}-V)/9.03{millivolt}));
    alpha_m = 1{dimensionless}/(1{dimensionless}+exp((-60{millivolt}-V)/5{millivolt}));
    beta_m = 0.1{dimensionless}/(1{dimensionless}+exp((V+35{millivolt})/5{millivolt}))+0.1{dimensionless}/(1{dimensionless}+exp((V-50{millivolt})/200{millivolt}));
    tau_m = 1{millisecond}*alpha_m*beta_m;
    ode(m, time) = (m_inf-m)/tau_m;
  enddef;

  def comp iNa_h_gate as
    var h: dimensionless {pub: out, init: 0.7768};
    var shift_INa_inact: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var h_inf: dimensionless;
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var tau_h: millisecond;
    h_inf = 1{dimensionless}/sqr(1{dimensionless}+exp((V+71.55{millivolt}-shift_INa_inact)/7.43{millivolt}));
    alpha_h = sel
      case V < -40{millivolt}+shift_INa_inact:
        0.057{per_millisecond}*exp(-(V+80{millivolt}-shift_INa_inact)/6.8{millivolt});
      otherwise:
        0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40{millivolt}+shift_INa_inact:
        2.7{per_millisecond}*exp(0.079{per_millivolt}*(V-shift_INa_inact))+310000{per_millisecond}*exp(0.3485{per_millivolt}*(V-shift_INa_inact));
      otherwise:
        0.77{per_millisecond}/(0.13{dimensionless}*(1{dimensionless}+exp((V+10.66{millivolt}-shift_INa_inact)/(-11.1{millivolt}))));
    endsel;
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp iNa_j_gate as
    var j: dimensionless {pub: out, init: 0.7766};
    var shift_INa_inact: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var j_inf: dimensionless;
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    var tau_j: millisecond;
    j_inf = 1{dimensionless}/sqr(1{dimensionless}+exp((V+71.55{millivolt}-shift_INa_inact)/7.43{millivolt}));
    alpha_j = sel
      case V < -40{millivolt}+shift_INa_inact:
        (-25428{per_millisecond}*exp(0.2444{per_millivolt}*(V-shift_INa_inact))-6.948e-6{per_millisecond}*exp(-0.04391{per_millivolt}*(V-shift_INa_inact)))*(V+37.78{millivolt})/1{millivolt}/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt}-shift_INa_inact)));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40{millivolt}+shift_INa_inact:
        0.02424{per_millisecond}*exp(-0.01052{per_millivolt}*(V-shift_INa_inact))/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt}-shift_INa_inact)));
      otherwise:
        0.6{per_millisecond}*exp(0.057{per_millivolt}*(V-shift_INa_inact))/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt}-shift_INa_inact)));
    endsel;
    tau_j = 1{dimensionless}/(alpha_j+beta_j);
    ode(j, time) = (j_inf-j)/tau_j;
  enddef;

  def comp INab as
    var i_b_Na: nanoA_per_nanoF {pub: out};
    var g_bna: microS_per_nanoF {init: 0.00029};
    var E_Na: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    i_b_Na = g_bna*(V-E_Na);
  enddef;

  def comp ICaL as
    var i_CaL: nanoA_per_nanoF {pub: out};
    var g_CaL: litre_per_farad_millisecond {init: 2e-5};
    var Ca_o: millimolar {pub: in};
    var Ca_ss: millimolar {pub: in, priv: out};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var d: dimensionless {pub: out, priv: in};
    var f: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    var fCass: dimensionless {priv: in};
    var z: dimensionless {init: 2};
    i_CaL = g_CaL*d*f*f2*fCass*sqr(z)*(V-15{millivolt})*sqr(F)/(R*T)*(0.25{dimensionless}*Ca_ss*exp(2{dimensionless}*(V-15{millivolt})*F/(R*T))-Ca_o)/(exp(2{dimensionless}*(V-15{millivolt})*F/(R*T))-1{dimensionless});
  enddef;

  def comp iCaL_d_gate as
    var d: dimensionless {pub: out, init: 5.06e-6};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var d_inf: dimensionless;
    var alpha_d: dimensionless;
    var beta_d: dimensionless;
    var gamma_d: millisecond;
    var tau_d: millisecond;
    var d_inf_shift: millivolt {init: 5};
    d_inf = 1{dimensionless}/(1{dimensionless}+exp((d_inf_shift-V)/7.5{millivolt}));
    alpha_d = 1.4{dimensionless}/(1{dimensionless}+exp((-35{millivolt}-V)/13{millivolt}))+0.25{dimensionless};
    beta_d = 1.4{dimensionless}/(1{dimensionless}+exp((V+5{millivolt})/5{millivolt}));
    gamma_d = 1{millisecond}/(1{dimensionless}+exp((50{millivolt}-V)/20{millivolt}));
    tau_d = 1{millisecond}*alpha_d*beta_d+gamma_d;
    ode(d, time) = (d_inf-d)/tau_d;
  enddef;

  def comp iCaL_f_gate as
    var f: dimensionless {pub: out, init: 0.9999};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var f_inf: dimensionless;
    var tau_f: millisecond;
    f_inf = 1{dimensionless}/(1{dimensionless}+exp((V+20{millivolt})/7{millivolt}));
    tau_f = (1102.5{millisecond}*exp(-sqr(V+27{millivolt})/225{millivolt2})+200{millisecond}/(1{dimensionless}+exp((13{millivolt}-V)/10{millivolt}))+180{millisecond}/(1{dimensionless}+exp((V+30{millivolt})/10{millivolt}))+20{millisecond})/4{dimensionless};
    ode(f, time) = (f_inf-f)/tau_f;
  enddef;

  def comp iCaL_f2_gate as
    var f2: dimensionless {pub: out, init: 0.9995};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var f2_inf: dimensionless;
    var tau_f2: millisecond;
    f2_inf = 0.75{dimensionless}/(1{dimensionless}+exp((V+35{millivolt})/7{millivolt}))+0.25{dimensionless};
    tau_f2 = (562{millisecond}*exp(-sqr(V+27{millivolt})/240{millivolt2})+31{millisecond}/(1{dimensionless}+exp((25{millivolt}-V)/10{millivolt}))+80{millisecond}/(1{dimensionless}+exp((V+30{millivolt})/10{millivolt})))/2{dimensionless};
    ode(f2, time) = (f2_inf-f2)/tau_f2;
  enddef;

  def comp iCaL_fCass_gate as
    var fCass: dimensionless {pub: out, init: 1};
    var Ca_ss: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var fCass_inf: dimensionless;
    var tau_fCass: millisecond;
    fCass_inf = 0.4{dimensionless}/(1{dimensionless}+sqr(Ca_ss/0.05{millimolar}))+0.6{dimensionless};
    tau_fCass = 80{millisecond}/(1{dimensionless}+sqr(Ca_ss/0.05{millimolar}))+2{millisecond};
    ode(fCass, time) = (fCass_inf-fCass)/tau_fCass;
  enddef;

  def comp ICab as
    var i_b_Ca: nanoA_per_nanoF {pub: out};
    var g_bca: microS_per_nanoF {init: 0.0004736};
    var E_Ca: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    i_b_Ca = g_bca*(V-E_Ca);
  enddef;

  def comp IpCa as
    var i_p_Ca: nanoA_per_nanoF {pub: out};
    var g_pCa: nanoA_per_nanoF {init: 0.0619};
    var K_pCa: millimolar {init: 0.0005};
    var Ca_i: millimolar {pub: in};
    i_p_Ca = g_pCa*Ca_i/(Ca_i+K_pCa);
  enddef;

  def comp IpK as
    var i_p_K: nanoA_per_nanoF {pub: out};
    var g_pK: microS_per_nanoF {init: 0.00973};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    i_p_K = g_pK*(V-E_K)/(1{dimensionless}+exp((25{millivolt}-V)/5.98{millivolt}));
  enddef;

  def comp INaK as
    var i_NaK: nanoA_per_nanoF {pub: out};
    var P_NaK: nanoA_per_nanoF {init: 1.297};
    var K_mk: millimolar {init: 1};
    var K_mNa: millimolar {init: 40};
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var time: millisecond {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in, priv: out};
    i_NaK = P_NaK*K_o/(K_o+K_mk)*Na_i/(Na_i+K_mNa)/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0353{dimensionless}*exp(-V*F/(R*T)));
  enddef;

  def comp INaCa as
    var i_NaCa: nanoA_per_nanoF {pub: out};
    var K_NaCa: nanoA_per_nanoF {init: 200};
    var K_sat: dimensionless {init: 0.1};
    var alpha: dimensionless {init: 2.5};
    var gamma: dimensionless {init: 0.35};
    var Km_Ca: millimolar {init: 1.38};
    var Km_Nai: millimolar {init: 87.5};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_NaCa = K_NaCa*(exp(gamma*V*F/(R*T))*pow(Na_i, 3{dimensionless})*Ca_o-exp((gamma-1{dimensionless})*V*F/(R*T))*pow(Na_o, 3{dimensionless})*Ca_i*alpha)/((pow(Km_Nai, 3{dimensionless})+pow(Na_o, 3{dimensionless}))*(Km_Ca+Ca_o)*(1{dimensionless}+K_sat*exp((gamma-1{dimensionless})*V*F/(R*T))));
  enddef;

  def comp Ca as
    var Ca_i: millimolar {pub: out, priv: out, init: 1.092e-4};
    var Ca_SR: millimolar {priv: out, init: 2.7656};
    var Ca_ss: millimolar {pub: out, priv: out, init: 1.893e-4};
    var Ca_i_bufc: dimensionless {priv: in};
    var Ca_sr_bufsr: dimensionless {priv: in};
    var Ca_ss_bufss: dimensionless {priv: in};
    var V_sr: nanolitre {init: 0.001094};
    var V_ss: nanolitre {init: 0.00005468};
    var V: millivolt {pub: in};
    var Vol_c: nanolitre {pub: in};
    var time: millisecond {pub: in, priv: out};
    var d: dimensionless {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cm: nanoF {pub: in};
    var i_CaL: nanoA_per_nanoF {pub: in};
    var i_NaCa: nanoA_per_nanoF {pub: in};
    var i_p_Ca: nanoA_per_nanoF {pub: in};
    var i_b_Ca: nanoA_per_nanoF {pub: in};
    var i_rel: millimolar_per_millisecond {priv: in};
    var i_up: millimolar_per_millisecond {priv: in};
    var i_leak: millimolar_per_millisecond {priv: in};
    var i_xfer: millimolar_per_millisecond {priv: in};
    ode(Ca_i, time) = Ca_i_bufc*((i_leak-i_up)*V_sr/Vol_c+i_xfer-(i_b_Ca+i_p_Ca-2{dimensionless}*i_NaCa)*Cm/(2{dimensionless}*Vol_c*F));
    ode(Ca_SR, time) = Ca_sr_bufsr*(i_up-(i_rel+i_leak));
    ode(Ca_ss, time) = Ca_ss_bufss*(-i_CaL*Cm/(2{dimensionless}*V_ss*F)+i_rel*V_sr/V_ss-i_xfer*Vol_c/V_ss);
  enddef;

  def comp Ileak_Iup_Ixfer as
    var i_up: millimolar_per_millisecond {pub: out};
    var i_leak: millimolar_per_millisecond {pub: out};
    var i_xfer: millimolar_per_millisecond {pub: out};
    var Vol_xfer: per_millisecond {init: 0.0038};
    var K_up: millimolar {init: 0.00025};
    var Vol_leak: per_millisecond {init: 0.00036};
    var Vmax_up: millimolar_per_millisecond {init: 0.006375};
    var Ca_i: millimolar {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Ca_SR: millimolar {pub: in};
    i_up = Vmax_up/(1{dimensionless}+sqr(K_up)/sqr(Ca_i));
    i_leak = Vol_leak*(Ca_SR-Ca_i);
    i_xfer = Vol_xfer*(Ca_ss-Ca_i);
  enddef;

  def comp Irel as
    var i_rel: millimolar_per_millisecond {pub: out};
    var R_prime: dimensionless {init: 0.9864};
    var k1_prime: per_millimolar2_per_millisecond {init: 0.15};
    var k2_prime: per_millimolar_per_millisecond {init: 0.045};
    var EC: millimolar {init: 1.5};
    var max_sr: dimensionless {init: 2.5};
    var min_sr: dimensionless {init: 1};
    var k3: per_millisecond {init: 0.06};
    var k4: per_millisecond {init: 0.005};
    var Vol_rel: per_millisecond {init: 0.306};
    var Ca_ss: millimolar {pub: in};
    var Ca_SR: millimolar {pub: in};
    var time: millisecond {pub: in};
    var O: dimensionless;
    var kcasr: dimensionless;
    var k1: per_millimolar2_per_millisecond;
    var k2: per_millimolar_per_millisecond;
    kcasr = max_sr-(max_sr-min_sr)/(1{dimensionless}+sqr(EC/Ca_SR));
    k1 = k1_prime/kcasr;
    k2 = k2_prime*kcasr;
    O = k1*sqr(Ca_ss)*R_prime/(k3+k1*sqr(Ca_ss));
    i_rel = Vol_rel*O*(Ca_SR-Ca_ss);
    ode(R_prime, time) = -k2*Ca_ss*R_prime+k4*(1{dimensionless}-R_prime);
  enddef;

  def comp Ca_buffer as
    var Ca_i_bufc: dimensionless {pub: out};
    var Ca_sr_bufsr: dimensionless {pub: out};
    var Ca_ss_bufss: dimensionless {pub: out};
    var Ca_i: millimolar {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Ca_SR: millimolar {pub: in};
    var Buf_c: millimolar {init: 0.2};
    var K_buf_c: millimolar {init: 0.001};
    var Buf_sr: millimolar {init: 10};
    var K_buf_sr: millimolar {init: 0.3};
    var Buf_ss: millimolar {init: 0.4};
    var K_buf_ss: millimolar {init: 0.00025};
    Ca_i_bufc = 1{dimensionless}/(1{dimensionless}+Buf_c*K_buf_c/sqr(Ca_i+K_buf_c));
    Ca_sr_bufsr = 1{dimensionless}/(1{dimensionless}+Buf_sr*K_buf_sr/sqr(Ca_SR+K_buf_sr));
    Ca_ss_bufss = 1{dimensionless}/(1{dimensionless}+Buf_ss*K_buf_ss/sqr(Ca_ss+K_buf_ss));
  enddef;

  def comp Na as
    var Na_i: millimolar {pub: out, init: 7.940167};
    var time: millisecond {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cm: nanoF {pub: in};
    var Vol_c: nanolitre {pub: in};
    var i_Na: nanoA_per_nanoF {pub: in};
    var i_NaCa: nanoA_per_nanoF {pub: in};
    var i_NaK: nanoA_per_nanoF {pub: in};
    var i_b_Na: nanoA_per_nanoF {pub: in};
    ode(Na_i, time) = -(i_Na+i_b_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)*Cm/(Vol_c*F);
  enddef;

  def comp K as
    var K_i: millimolar {pub: out, init: 141.0167};
    var time: millisecond {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cm: nanoF {pub: in};
    var Vol_c: nanolitre {pub: in};
    var i_K1: nanoA_per_nanoF {pub: in};
    var i_to: nanoA_per_nanoF {pub: in};
    var i_NaK: nanoA_per_nanoF {pub: in};
    var i_Kr: nanoA_per_nanoF {pub: in};
    var i_Ks: nanoA_per_nanoF {pub: in};
    var i_p_K: nanoA_per_nanoF {pub: in};
    var i_Stim: nanoA_per_nanoF {pub: in};
    ode(K_i, time) = -(i_K1+i_to+i_Kr+i_Ks+i_p_K+i_Stim-2{dimensionless}*i_NaK)/(Vol_c*F)*Cm;
  enddef;

  def comp transmembrane_currents as
  enddef;

  def comp intracellular_currents as
  enddef;

  def comp Ions_n_reversal_potentials as
  enddef;

  def group as containment for
    comp cell incl
      comp transmembrane_currents incl
        comp INa incl
          comp iNa_h_gate;
          comp iNa_j_gate;
          comp iNa_m_gate;
        endcomp;
        comp ICaL incl
          comp iCaL_d_gate;
          comp iCaL_f_gate;
          comp iCaL_f2_gate;
          comp iCaL_fCass_gate;
        endcomp;
        comp IK1 incl
          comp iK1_rectification;
        endcomp;
        comp IKr incl
          comp iKr_Markov;
          comp iKr_Markov_Sotalol_block;
        endcomp;
        comp IKs incl
          comp iKs_Xs_gate;
        endcomp;
        comp Ito incl
          comp ito_s_gate;
          comp ito_r_gate;
        endcomp;
        comp INaK;
        comp INaCa;
        comp INab;
        comp ICab;
        comp IpCa;
        comp IpK;
      endcomp;
      comp intracellular_currents incl
        comp Irel;
        comp Ileak_Iup_Ixfer;
      endcomp;
      comp Ions_n_reversal_potentials incl
        comp Ca incl
          comp Ca_buffer;
        endcomp;
        comp Na;
        comp K;
        comp reversal_potentials;
      endcomp;
    endcomp;
  enddef;

  def group as encapsulation for
    comp INa incl
      comp iNa_m_gate;
      comp iNa_h_gate;
      comp iNa_j_gate;
    endcomp;
    comp ICaL incl
      comp iCaL_d_gate;
      comp iCaL_f_gate;
      comp iCaL_f2_gate;
      comp iCaL_fCass_gate;
    endcomp;
    comp IK1 incl
      comp iK1_rectification;
    endcomp;
    comp IKr incl
      comp iKr_Markov incl
        comp iKr_Markov_Sotalol_block;
      endcomp;
    endcomp;
    comp IKs incl
      comp iKs_Xs_gate;
    endcomp;
    comp Ito incl
      comp ito_s_gate;
      comp ito_r_gate;
    endcomp;
    comp Ca incl
      comp Irel;
      comp Ca_buffer;
      comp Ileak_Iup_Ixfer;
    endcomp;
  enddef;
  def map between cell and Environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and Environment for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_o and K_o;
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between INa and Environment for
    vars time and time;
  enddef;
  def map between ICaL and Environment for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ca_o and Ca_o;
  enddef;
  def map between IKr and Environment for
    vars time and time;
    vars T and T;
    vars K_o and K_o;
  enddef;
  def map between IKs and Environment for
    vars time and time;
  enddef;
  def map between IK1 and Environment for
    vars time and time;
    vars T and T;
    vars K_o and K_o;
  enddef;
  def map between INab and Environment for
    vars time and time;
  enddef;
  def map between ICab and Environment for
    vars time and time;
  enddef;
  def map between Ito and Environment for
    vars time and time;
  enddef;
  def map between INaK and Environment for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_o and K_o;
  enddef;
  def map between INaCa and Environment for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between Ca and Environment for
    vars time and time;
    vars F and F;
  enddef;
  def map between Na and Environment for
    vars time and time;
    vars F and F;
  enddef;
  def map between K and Environment for
    vars time and time;
    vars F and F;
  enddef;
  def map between cell and INa for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between cell and ICaL for
    vars V and V;
    vars i_CaL and i_CaL;
  enddef;
  def map between cell and IKr for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between cell and IKs for
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between cell and Ito for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between cell and IK1 for
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between cell and INab for
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between cell and ICab for
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between cell and INaK for
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between cell and INaCa for
    vars V and V;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between cell and IpCa for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between cell and IpK for
    vars V and V;
    vars i_p_K and i_p_K;
  enddef;
  def map between cell and Ca for
    vars V and V;
    vars Vol_c and Vol_c;
    vars Cm and Cm;
  enddef;
  def map between cell and Na for
    vars Vol_c and Vol_c;
    vars Cm and Cm;
  enddef;
  def map between cell and K for
    vars Vol_c and Vol_c;
    vars Cm and Cm;
    vars i_Stim and i_Stim;
  enddef;
  def map between reversal_potentials and INab for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and IK1 for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and IKr for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and Ito for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and IpK for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and IKs for
    vars E_Ks and E_Ks;
  enddef;
  def map between reversal_potentials and ICab for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and INa for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and Ca for
    vars Ca_i and Ca_i;
  enddef;
  def map between reversal_potentials and K for
    vars K_i and K_i;
  enddef;
  def map between reversal_potentials and Na for
    vars Na_i and Na_i;
  enddef;
  def map between IK1 and iK1_rectification for
    vars xK1_inf and xK1_inf;
    vars E_K and E_K;
    vars V and V;
  enddef;
  def map between IK1 and K for
    vars i_K1 and i_K1;
  enddef;
  def map between IKr and K for
    vars i_Kr and i_Kr;
  enddef;
  def map between IKs and K for
    vars i_Ks and i_Ks;
  enddef;
  def map between INa and Na for
    vars i_Na and i_Na;
  enddef;
  def map between INab and Na for
    vars i_b_Na and i_b_Na;
  enddef;
  def map between ICaL and Ca for
    vars Ca_ss and Ca_ss;
    vars d and d;
    vars i_CaL and i_CaL;
  enddef;
  def map between IpCa and Ca for
    vars Ca_i and Ca_i;
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between ICab and Ca for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between INaK and K for
    vars i_NaK and i_NaK;
  enddef;
  def map between INaK and Na for
    vars i_NaK and i_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between INaCa and Ca for
    vars i_NaCa and i_NaCa;
    vars Ca_i and Ca_i;
  enddef;
  def map between INaCa and Na for
    vars i_NaCa and i_NaCa;
    vars Na_i and Na_i;
  enddef;
  def map between IKr and iKr_Markov for
    vars Or4 and Or4;
    vars time and time;
    vars V and V;
    vars T and T;
    vars K_o and K_o;
  enddef;
  def map between iKr_Markov and iKr_Markov_Sotalol_block for
    vars time and time;
    vars alpha_xr1 and alpha_xr1;
    vars beta_xr1 and beta_xr1;
    vars alpha_xr2 and alpha_xr2;
    vars beta_xr2 and beta_xr2;
    vars alpha_xr3 and alpha_xr3;
    vars beta_xr3 and beta_xr3;
    vars alpha_xr4 and alpha_xr4;
    vars beta_xr4 and beta_xr4;
    vars Or4 and O;
    vars OtoB and OtoB;
    vars BtoO and BtoO;
  enddef;
  def map between IKs and iKs_Xs_gate for
    vars Xs and Xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between INa and iNa_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between INa and iNa_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
  enddef;
  def map between INa and iNa_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
  enddef;
  def map between ICaL and iCaL_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between ICaL and iCaL_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between ICaL and iCaL_f2_gate for
    vars f2 and f2;
    vars time and time;
    vars V and V;
  enddef;
  def map between ICaL and iCaL_fCass_gate for
    vars fCass and fCass;
    vars time and time;
    vars Ca_ss and Ca_ss;
    vars V and V;
  enddef;
  def map between Ito and ito_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ito and ito_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ito and K for
    vars i_to and i_to;
  enddef;
  def map between IpK and K for
    vars i_p_K and i_p_K;
  enddef;
  def map between Ca and Irel for
    vars i_rel and i_rel;
    vars Ca_ss and Ca_ss;
    vars Ca_SR and Ca_SR;
    vars time and time;
  enddef;
  def map between Ca and Ileak_Iup_Ixfer for
    vars i_up and i_up;
    vars i_leak and i_leak;
    vars i_xfer and i_xfer;
    vars Ca_i and Ca_i;
    vars Ca_ss and Ca_ss;
    vars Ca_SR and Ca_SR;
  enddef;
  def map between Ca and Ca_buffer for
    vars Ca_i_bufc and Ca_i_bufc;
    vars Ca_sr_bufsr and Ca_sr_bufsr;
    vars Ca_ss_bufss and Ca_ss_bufss;
    vars Ca_i and Ca_i;
    vars Ca_ss and Ca_ss;
    vars Ca_SR and Ca_SR;
  enddef;
enddef;
