<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  fohlmeister_model_1997.xml

CREATED :  15th October 2003

LAST MODIFIED : 20th April 2005

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the CellML Metadata 1.0 Specification released on 16th
January, 2002.

DESCRIPTION :  This file contains a CellML description of Fohlmeister and Miller's 2003 computational model of the impulse encoding mechanics of ganglion cells in the tiger salamander retina.  

CHANGES
  20/04/2005 - PJV - Made MathML id's unique
  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="fohlmeister_miller_1997_version01" name="fohlmeister_miller_1997_version01">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Modelling the Impulse Encoding Mechanisms of Ganglion Cells in the Tiger Salamander Retina</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This is the original unchecked version of the model imported from the previous
            CellML model repository, 24-Jan-2006.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
The ganglion cells present in the vertebrate retina form the only pathway by which the retina and the brain communicate.  These output neurons translate the post-synaptic potentials into a pattern of impulses whose frequency is regulated by the synaptic current.  Voltage-clamp studies of retinal ganglion cells have suggested that there are at least five different ionic currents present, namely: <emphasis>I<subscript>Na</subscript>
          </emphasis>; <emphasis>I<subscript>Ca</subscript>
          </emphasis>; the non-activating, delayed rectifier <emphasis>I<subscript>K</subscript>
          </emphasis>; inactivating <emphasis>I<subscript>K,A</subscript>
          </emphasis>; and calcium-activated potassium currents <emphasis>I<subscript>K,Ca</subscript>
          </emphasis>.  In 1990, Fohlmeister <emphasis>et al.</emphasis> developed a mathematical model of ganglion cell impulse generation which was based on these five ionic currents.  The first four currents were modelled as being voltage-gated, while the fifth current, <emphasis>I<subscript>K,Ca</subscript>
          </emphasis>, is gated by [Ca<superscript>2+</superscript>]<subscript>i</subscript>.  The basic mathematical structure of the model is based on the Hodgkin-Huxley style of cellular modelling (see <ulink url="${HTML_EXMPL_HHSA_INTRO}">The Hodgkin-Huxley Squid Axon Model, 1952</ulink> for more details).  
</para>

<para>
This 1990 model appeared to provide a reasonably accurate representation of both the impulse waveform and repetitive firing behaviour of ganglion cells in the tiger salamander retina.  Model simulations suggested that <emphasis>I<subscript>K,Ca</subscript>
          </emphasis> might play an important role in stabilising the cell (i.e. preventing spontaneous firing), and also in regulating the interspike period.  To improve their understanding of this mechanism, in 1997, Fohlmeister and Miller combined new whole-cell experimental data together with pharmacological information and computer modelling to provide an integrated view of the experimental results, analysis, and simulation (see <xref linkend="fig_cell_diagram"/> below for a schematic diagram of their model).  
</para>

<para>
Model simulations suggested that <emphasis>I<subscript>Ca</subscript>
          </emphasis> and <emphasis>I<subscript>K,Ca</subscript>
          </emphasis> do play an important role in controlling impulse frequency.  But although this single compartment model was regarded as being qualitatively accurate in simulating impulse frequency behaviour and its underlying mechanisms, model limitations arose due to a lack of morphological data.  This issue was addressed in a detailed, multicompartmental model of the ganglion cell, which was published in a companion paper.
</para>

<para>
The model has been described here in CellML (the raw CellML description of the Fohlmeister and Miller 1997 model can be downloaded in various formats as described in <xref linkend="sec_download_this_model"/>).     
</para>

<para>
The complete original paper reference is cited below:
</para>

<para>
<ulink url="http://jn.physiology.org/cgi/content/abstract/78/4/1935">Impulse Encoding Mechanisms of Ganglion Cells in the Tiger Salamander Retina</ulink>, J. F. Fohlmeister and R. F. Miller, 1997, <ulink url="http://jn.physiology.org/">
            <emphasis>Journal of Neurophysiology</emphasis>
          </ulink>, 78, 1935-1947.  (<ulink url="http://jn.physiology.org/cgi/content/full/78/4/1935">Full text (HTML)</ulink> and <ulink url="http://jn.physiology.org/cgi/reprint/78/4/1935.pdf">PDF</ulink> versions of the article are available on the <emphasis>Journal of Neurophysiology</emphasis> website.)  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=9325362&amp;dopt=Abstract">PubMed ID: 9325362</ulink>
</para>

<informalfigure float="0" id="fig_cell_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>cell diagram</title>
    </objectinfo>
    <imagedata fileref="cell_diagram.gif"/>
  </imageobject>
</mediaobject>
<caption>A schematic illustration showing: A) a ganglion cell with its axon projecting upwards and its numerous dendrites projecting out from the soma; and B) the ionic currents across the plasma membrane of the cell.</caption>
</informalfigure>

</sect1>
</article>
</documentation>
  
  
  
  <units name="millivolt">
    <unit units="volt" prefix="milli"/>
  </units>
  
  <units name="millisecond">
    <unit units="second" prefix="milli"/>
  </units>
  
  <units name="per_millisecond">
    <unit units="millisecond" exponent="-1"/>
  </units>
  
  <units name="per_millivolt_millisecond">
    <unit units="millivolt" exponent="-1"/>
    <unit units="millisecond" exponent="-1"/>
  </units>

  <units name="milliS_per_cm2">
    <unit units="siemens" prefix="milli"/>
    <unit units="metre" prefix="centi" exponent="-2"/>
  </units>
  
  <units name="microF_per_cm2">
    <unit units="farad" prefix="micro"/>
    <unit units="metre" prefix="centi" exponent="-2"/>
  </units>
  
  <units name="microA_per_cm2">
    <unit units="ampere" prefix="pico"/>
    <unit units="metre" prefix="centi" exponent="-2"/>
  </units>
  
  <units name="molar">
    <unit units="mole"/>
    <unit units="litre" exponent="-1"/>
  </units>
  
  <units name="millimolar">
    <unit units="mole" prefix="milli"/>
    <unit units="litre" exponent="-1"/>
  </units>
  
  <units name="millijoule_per_mole_kelvin">
    <unit units="joule" prefix="milli"/>
    <unit units="mole" exponent="-1"/>
    <unit units="kelvin" exponent="-1"/>
  </units>
  
  <units name="coulomb_per_mole">
    <unit units="coulomb"/>
    <unit units="mole" exponent="-1"/>
  </units>
  
  
  <component name="environment">
    <variable units="millisecond" public_interface="out" name="time"/>
  </component>
  
  <component name="membrane">
    <variable units="millivolt" public_interface="out" name="V"/>
     
    <variable units="microF_per_cm2" name="Cm" initial_value="1.0"/>
    
    <variable units="millisecond" public_interface="in" name="time"/>
    <variable units="microA_per_cm2" public_interface="in" name="i_Na"/>
    <variable units="microA_per_cm2" public_interface="in" name="i_Ca"/>
    <variable units="microA_per_cm2" public_interface="in" name="i_K"/>
    <variable units="microA_per_cm2" public_interface="in" name="i_K_A"/>
    <variable units="microA_per_cm2" public_interface="in" name="i_K_Ca"/>
    <variable units="microA_per_cm2" public_interface="in" name="i_L"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="membrane_voltage_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> V </ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <minus/>
            <apply>
              <divide/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <ci> Cm </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <ci> i_Na </ci>
            <ci> i_Ca </ci>
            <ci> i_K </ci>
            <ci> i_K_A </ci>
            <ci> i_K_Ca </ci>
            <ci> i_L </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="sodium_channel">
    <variable units="microA_per_cm2" public_interface="out" name="i_Na"/>
    
    <variable units="millivolt" name="E_Na" initial_value="35.0"/>
    <variable units="milliS_per_cm2" name="g_Na" initial_value="50.0"/>
    
    <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
    <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
    
    <variable units="dimensionless" private_interface="in" name="m"/>
    <variable units="dimensionless" private_interface="in" name="h"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="i_Na_calculation">
        <eq/>
        <ci> i_Na </ci>
        <apply>
          <times/>
          <ci> g_Na </ci>
          <apply>
            <power/>
            <ci> m </ci>
            <cn cellml:units="dimensionless"> 3.0 </cn>
          </apply>
          <ci> h </ci>
          <apply>
            <minus/>
            <ci> V </ci>
            <ci> E_Na </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="sodium_channel_m_gate">
    <variable units="dimensionless" public_interface="out" name="m"/>
        
    <variable units="per_millisecond" name="alpha_m"/>
    <variable units="per_millisecond" name="beta_m"/>

     <variable units="millivolt" public_interface="in" name="V"/>
    <variable units="millisecond" public_interface="in" name="time"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="alpha_m_calculation">
        <eq/>
        <ci> alpha_m </ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="per_millivolt_millisecond"> -0.6 </cn>
            <apply>
              <plus/>
              <ci> V </ci>
              <cn cellml:units="millivolt"> 30.0 </cn>
            </apply>
          </apply>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <times/>
                <cn cellml:units="dimensionless"> -0.1 </cn>
                <apply>
                  <plus/>
                  <ci> V </ci>
                  <cn cellml:units="millivolt"> 30.0 </cn>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless"> 1.0 </cn>
          </apply>
        </apply>
      </apply>
      
      <apply id="beta_m_calculation">
        <eq/>
        <ci> beta_m </ci>
        <apply>
          <times/>
          <cn cellml:units="per_millisecond"> 20.0 </cn>
          <apply>
            <exp/>
            <apply>
              <divide/>
              <apply>
                <minus/>
                <apply>
                  <plus/>
                  <ci> V </ci>
                  <cn cellml:units="millivolt"> 55.0 </cn>
                </apply>
              </apply>
              <cn cellml:units="millivolt"> 18.0 </cn>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="dm_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> m </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> alpha_m </ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <ci> m </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> beta_m </ci>
            <ci> m </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="sodium_channel_h_gate">
    <variable units="dimensionless" public_interface="out" name="h"/>
        
    <variable units="per_millisecond" name="alpha_h"/>
    <variable units="per_millisecond" name="beta_h"/>

    <variable units="millivolt" public_interface="in" name="V"/>
    <variable units="millisecond" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="sodium_channel_h_gate_alpha_h_calculation">
        <eq/>
        <ci> alpha_h </ci>
        <apply>
          <times/>
          <cn cellml:units="per_millisecond"> 0.4 </cn>
          <apply>
            <exp/>
            <apply>
              <divide/>
              <apply>
                <minus/>
                <apply>
                  <plus/>
                  <ci> V </ci>
                  <cn cellml:units="millivolt"> 50.0 </cn>
                </apply>
              </apply>
              <cn cellml:units="millivolt"> 20.0 </cn>
            </apply>
          </apply>
        </apply>
      </apply>
       
      <apply id="sodium_channel_h_gate_beta_h_calculation">
        <eq/>
        <ci> beta_h </ci>
        <apply>
          <divide/>
          <cn cellml:units="per_millisecond"> 6.0 </cn>
          <apply>
            <plus/>
            <apply>
              <exp/>
              <apply>
                <times/>
                <cn cellml:units="dimensionless"> -0.1 </cn>
                <apply>
                  <plus/>
                  <ci> V </ci>
                  <cn cellml:units="millivolt"> 20.0 </cn>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless"> 1.0 </cn>
          </apply>
        </apply>
      </apply>
      
      <apply id="sodium_channel_h_gate_dh_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> h </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> alpha_h </ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <ci> h </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> beta_h </ci>
            <ci> h </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component> 
  
  <component name="calcium_channel">
    <variable units="microA_per_cm2" public_interface="out" name="i_Ca"/>
    
    <variable units="millivolt" name="E_Ca"/>
    <variable units="milliS_per_cm2" name="g_Ca" initial_value="2.2"/>
    <variable units="millijoule_per_mole_kelvin" name="R" initial_value="8314.0"/>
    <variable units="kelvin" name="T" initial_value="-4.72"/>
    
    <variable units="coulomb_per_mole" public_interface="in" name="F"/>
    <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
    <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
    <variable units="millimolar" public_interface="in" name="Ca_i"/>
    <variable units="millimolar" public_interface="in" name="Ca_e"/>
    
    <variable units="dimensionless" private_interface="in" name="c"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="i_Ca_calculation">
        <eq/>
        <ci> i_Ca </ci>
        <apply>
          <times/>
          <ci> g_Ca </ci>
          <apply>
            <power/>
            <ci> c </ci>
            <cn cellml:units="dimensionless"> 3.0 </cn>
          </apply>
          <apply>
            <minus/>
            <ci> V </ci>
            <ci> E_Ca </ci>
          </apply>
        </apply>
      </apply>
      
      <apply id="E_Ca_calculation">
        <eq/>
        <ci> E_Ca </ci>
        <apply>
          <times/>                
           <apply>
            <divide/>
            <apply>
              <times/>
              <ci> R </ci>
              <ci> T </ci>
            </apply>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> 2.0 </cn> 
              <ci> F </ci>
            </apply>
          </apply>
          <apply>
            <ln/>
            <apply>
              <divide/>
              <ci> Ca_e </ci>
              <ci> Ca_i </ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="calcium_channel_c_gate">
    <variable units="dimensionless" public_interface="out" name="c"/>
        
    <variable units="per_millisecond" name="alpha_c"/>
    <variable units="per_millisecond" name="beta_c"/>

    <variable units="millivolt" public_interface="in" name="V"/>
    <variable units="millisecond" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="alpha_c_calculation">
        <eq/>
        <ci> alpha_c </ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="per_millivolt_millisecond"> -0.3 </cn>
            <apply>
              <plus/>
              <ci> V </ci>
              <cn cellml:units="millivolt"> 13.0 </cn>
            </apply>
          </apply>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <times/>
                <cn cellml:units="dimensionless"> -0.1 </cn>
                <apply>
                  <plus/>
                  <ci> V </ci>
                  <cn cellml:units="millivolt"> 13.0 </cn>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless"> 1.0 </cn>
          </apply>
        </apply>
      </apply>
       
      <apply id="beta_c_calculation">
        <eq/>
        <ci> beta_c </ci>
        <apply>
          <times/>
          <cn cellml:units="per_millisecond"> 10.0 </cn>
          <apply>
            <exp/>
            <apply>
              <divide/>
              <apply>
                <minus/>
                <apply>
                  <plus/>
                  <ci> V </ci>
                  <cn cellml:units="millivolt"> 38.0 </cn>
                </apply>
              </apply>
              <cn cellml:units="millivolt"> 18.0 </cn>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="dc_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> c </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> alpha_c </ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <ci> c </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> beta_c </ci>
            <ci> c </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="delayed_rectifier_potassium_channel">
    <variable units="microA_per_cm2" public_interface="out" name="i_K"/>
    
    <variable units="milliS_per_cm2" name="g_K" initial_value="12.0"/>
    
    <variable units="millivolt" public_interface="in" name="E_K"/>
    <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
    <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
   
    <variable units="dimensionless" private_interface="in" name="n"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="i_K_calculation">
        <eq/>
        <ci> i_K </ci>
        <apply>
          <times/>
          <ci> g_K </ci>
          <apply>
            <power/>
            <ci> n </ci>
            <cn cellml:units="dimensionless"> 4.0 </cn>
          </apply>
          <apply>
            <minus/>
            <ci> V </ci>
            <ci> E_K </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component> 
  
  <component name="delayed_rectifier_potassium_channel_n_gate">
    <variable units="dimensionless" public_interface="out" name="n"/>
        
    <variable units="per_millisecond" name="alpha_n"/>
    <variable units="per_millisecond" name="beta_n"/>

    <variable units="millivolt" public_interface="in" name="V"/>
    <variable units="millisecond" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="alpha_n_nalculation">
        <eq/>
        <ci> alpha_n </ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="per_millivolt_millisecond"> -0.02 </cn>
            <apply>
              <plus/>
              <ci> V </ci>
              <cn cellml:units="millivolt"> 40.0 </cn>
            </apply>
          </apply>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <times/>
                <cn cellml:units="dimensionless"> -0.1 </cn>
                <apply>
                  <plus/>
                  <ci> V </ci>
                  <cn cellml:units="millivolt"> 40.0 </cn>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless"> 1.0 </cn>
          </apply>
        </apply>
      </apply>
       
      <apply id="beta_n_nalculation">
        <eq/>
        <ci> beta_n </ci>
        <apply>
          <times/>
          <cn cellml:units="per_millisecond"> 0.4 </cn>
          <apply>
            <exp/>
            <apply>
              <divide/>
              <apply>
                <minus/>
                <apply>
                  <plus/>
                  <ci> V </ci>
                  <cn cellml:units="millivolt"> 50.0 </cn>
                </apply>
              </apply>
              <cn cellml:units="millivolt"> 80.0 </cn>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="dn_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> n </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> alpha_n </ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <ci> n </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> beta_n </ci>
            <ci> n </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="A_type_potassium_channel">
    <variable units="microA_per_cm2" public_interface="out" name="i_K_A"/>
    
    <variable units="milliS_per_cm2" name="g_K_A" initial_value="36.0"/>
    
    <variable units="millivolt" public_interface="in" name="E_K"/>
    <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
    <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
   
    <variable units="dimensionless" private_interface="in" name="a"/>
    <variable units="dimensionless" private_interface="in" name="h"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="i_K_A_calculation">
        <eq/>
        <ci> i_K_A </ci>
        <apply>
          <times/>
          <ci> g_K_A </ci>
          <apply>
            <power/>
            <ci> a </ci>
            <cn cellml:units="dimensionless"> 3.0 </cn>
          </apply>
          <ci> h </ci>
          <apply>
            <minus/>
            <ci> V </ci>
            <ci> E_K </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component> 
  
  <component name="A_type_potassium_channel_a_gate">
    <variable units="dimensionless" public_interface="out" name="a"/>
        
    <variable units="per_millisecond" name="alpha_a"/>
    <variable units="per_millisecond" name="beta_a"/>

     <variable units="millivolt" public_interface="in" name="V"/>
    <variable units="millisecond" public_interface="in" name="time"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="alpha_a_calculation">
        <eq/>
        <ci> alpha_a </ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="per_millivolt_millisecond"> -0.006 </cn>
            <apply>
              <plus/>
              <ci> V </ci>
              <cn cellml:units="millivolt"> 90.0 </cn>
            </apply>
          </apply>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <times/>
                <cn cellml:units="dimensionless"> -0.1 </cn>
                <apply>
                  <plus/>
                  <ci> V </ci>
                  <cn cellml:units="millivolt"> 90.0 </cn>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless"> 1.0 </cn>
          </apply>
        </apply>
      </apply>
      
      <apply id="beta_a_calculation">
        <eq/>
        <ci> beta_a </ci>
        <apply>
          <times/>
          <cn cellml:units="per_millisecond"> 0.1 </cn>
          <apply>
            <exp/>
            <apply>
              <divide/>
              <apply>
                <minus/>
                <apply>
                  <plus/>
                  <ci> V </ci>
                  <cn cellml:units="millivolt"> 30.0 </cn>
                </apply>
              </apply>
              <cn cellml:units="millivolt"> 10.0 </cn>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="da_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> a </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> alpha_a </ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <ci> a </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> beta_a </ci>
            <ci> a </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="A_type_potassium_channel_h_gate">
    <variable units="dimensionless" public_interface="out" name="h"/>
        
    <variable units="per_millisecond" name="alpha_h"/>
    <variable units="per_millisecond" name="beta_h"/>

    <variable units="millivolt" public_interface="in" name="V"/>
    <variable units="millisecond" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="A_type_potassium_channel_h_gate_alpha_h_calculation">
        <eq/>
        <ci> alpha_h </ci>
        <apply>
          <times/>
          <cn cellml:units="per_millisecond"> 0.04 </cn>
          <apply>
            <exp/>
            <apply>
              <divide/>
              <apply>
                <minus/>
                <apply>
                  <plus/>
                  <ci> V </ci>
                  <cn cellml:units="millivolt"> 70.0 </cn>
                </apply>
              </apply>
              <cn cellml:units="millivolt"> 20.0 </cn>
            </apply>
          </apply>
        </apply>
      </apply>
       
      <apply id="A_type_potassium_channel_h_gate_beta_h_calculation">
        <eq/>
        <ci> beta_h </ci>
        <apply>
          <divide/>
          <cn cellml:units="per_millisecond"> 0.6 </cn>
          <apply>
            <plus/>
            <apply>
              <exp/>
              <apply>
                <times/>
                <cn cellml:units="dimensionless"> -0.1 </cn>
                <apply>
                  <plus/>
                  <ci> V </ci>
                  <cn cellml:units="millivolt"> 40.0 </cn>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless"> 1.0 </cn>
          </apply>
        </apply>
      </apply>
      
      <apply id="A_type_potassium_channel_h_gate_dh_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> h </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> alpha_h </ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <ci> h </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> beta_h </ci>
            <ci> h </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>  
  
  <component name="calcium_activated_potassium_channel">
    <variable units="microA_per_cm2" public_interface="out" name="i_K_Ca"/>
    
    <variable units="milliS_per_cm2" name="g_K_Ca" initial_value="0.05"/>
    <variable units="milliS_per_cm2" name="g_K_Ca_gate"/>
    
    <variable units="millivolt" public_interface="in" name="E_K"/>
    <variable units="millisecond" public_interface="in" name="time"/>
    <variable units="millivolt" public_interface="in" name="V"/>
    <variable units="millimolar" public_interface="in" name="Ca_i"/>
    <variable units="millimolar" public_interface="in" name="Ca_diss"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="i_K_Ca_calculation">
        <eq/>
        <ci> i_K_Ca </ci>
        <apply>
          <times/>
          <ci> g_K_Ca </ci>
          <apply>
            <minus/>
            <ci> V </ci>
            <ci> E_K </ci>
          </apply>
        </apply>
      </apply>
      
      <apply id="g_K_Ca_gate_calculation">
        <eq/>
        <ci> g_K_Ca_gate </ci>
        <apply>
          <times/>
          <ci> g_K_Ca </ci>
          <apply>
            <divide/>
            <apply>
              <power/>
              <apply>
                <divide/>
                <ci> Ca_i </ci>
                <ci> Ca_diss </ci>
              </apply>
              <cn cellml:units="dimensionless"> 2.0 </cn>
            </apply>
            <apply>
              <plus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <apply>
                <power/>
                <apply>
                  <divide/>
                  <ci> Ca_i </ci>
                  <ci> Ca_diss </ci>
                </apply>
                <cn cellml:units="dimensionless"> 2.0 </cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component> 
  
  <component name="leakage_channel">
    <variable units="microA_per_cm2" public_interface="out" name="i_L"/>
    
    <variable units="milliS_per_cm2" name="g_L" initial_value="0.05"/>
    <variable units="millivolt" name="E_L" initial_value="-60.0"/>
    
    <variable units="millisecond" public_interface="in" name="time"/>
    <variable units="millivolt" public_interface="in" name="V"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="i_L_calculation">
        <eq/>
        <ci> i_L </ci>
        <apply>
          <times/>
          <ci> g_L </ci>
          <apply>
            <minus/>
            <ci> V </ci>
            <ci> E_L </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>  
  
  <component name="parameters">
    <variable units="molar" public_interface="out" name="Ca_i" initial_value="1.0E-7"/>
    <variable units="millimolar" public_interface="out" name="Ca_e"/>
    <variable units="molar" public_interface="out" name="Ca_diss" initial_value="1.0E-6"/>
    <variable units="millivolt" public_interface="out" name="E_K" initial_value="-75.0"/>
    <variable units="coulomb_per_mole" public_interface="out" name="F" initial_value="96487.0"/>
    
    <variable units="millimolar" name="Ca_res" initial_value="1.0E-7"/>
    <variable units="millisecond" name="tau_Ca" initial_value="1.5"/>
    <variable units="dimensionless" name="r"/>
    
    <variable units="millisecond" public_interface="in" name="time"/>
    <variable units="microA_per_cm2" public_interface="in" name="i_Ca"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="dCa_i_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> Ca_i </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> -3.0 </cn>
              <ci> i_Ca </ci>
            </apply>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> 2.0 </cn>
              <ci> F </ci>
              <ci> r </ci>
            </apply>
          </apply>
          <apply>
            <divide/>
            <apply>
              <minus/>
              <ci> Ca_i </ci>
              <ci> Ca_res </ci>
            </apply>
            <ci> tau_Ca </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <group>
    <relationship_ref relationship="containment"/>
    <component_ref component="membrane">
      <component_ref component="sodium_channel">
        <component_ref component="sodium_channel_m_gate"/>
        <component_ref component="sodium_channel_h_gate"/>
      </component_ref>
      <component_ref component="calcium_channel">
        <component_ref component="calcium_channel_c_gate"/>
      </component_ref>
      <component_ref component="calcium_activated_potassium_channel"/>
      <component_ref component="delayed_rectifier_potassium_channel">
        <component_ref component="delayed_rectifier_potassium_channel_n_gate"/>
      </component_ref>
      <component_ref component="A_type_potassium_channel">
        <component_ref component="A_type_potassium_channel_a_gate"/>
        <component_ref component="A_type_potassium_channel_h_gate"/>
      </component_ref>
      <component_ref component="leakage_channel"/>
      <component_ref component="parameters"/>
    </component_ref>
  </group>
  
  <group>
    <relationship_ref relationship="encapsulation"/>
    <component_ref component="sodium_channel">
      <component_ref component="sodium_channel_m_gate"/>
      <component_ref component="sodium_channel_h_gate"/>
    </component_ref>
    <component_ref component="calcium_channel">
      <component_ref component="calcium_channel_c_gate"/>
    </component_ref>
    <component_ref component="delayed_rectifier_potassium_channel">
      <component_ref component="delayed_rectifier_potassium_channel_n_gate"/>
    </component_ref>
    <component_ref component="A_type_potassium_channel">
      <component_ref component="A_type_potassium_channel_a_gate"/>
      <component_ref component="A_type_potassium_channel_h_gate"/>
    </component_ref>
  </group>
  
  
  <connection>
    <map_components component_2="environment" component_1="membrane"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="sodium_channel"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="calcium_channel"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="delayed_rectifier_potassium_channel"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="calcium_activated_potassium_channel"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="A_type_potassium_channel"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="leakage_channel"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="parameters"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="sodium_channel" component_1="membrane"/>
    <map_variables variable_2="V" variable_1="V"/>
    <map_variables variable_2="i_Na" variable_1="i_Na"/>
  </connection>
  
  <connection>
    <map_components component_2="calcium_channel" component_1="membrane"/>
    <map_variables variable_2="V" variable_1="V"/>
    <map_variables variable_2="i_Ca" variable_1="i_Ca"/>
  </connection>
  
  <connection>
    <map_components component_2="delayed_rectifier_potassium_channel" component_1="membrane"/>
    <map_variables variable_2="V" variable_1="V"/>
    <map_variables variable_2="i_K" variable_1="i_K"/>
  </connection>
  
  <connection>
    <map_components component_2="calcium_activated_potassium_channel" component_1="membrane"/>
    <map_variables variable_2="V" variable_1="V"/>
    <map_variables variable_2="i_K_Ca" variable_1="i_K_Ca"/>
  </connection>
  
  <connection>
    <map_components component_2="A_type_potassium_channel" component_1="membrane"/>
    <map_variables variable_2="V" variable_1="V"/>
    <map_variables variable_2="i_K_A" variable_1="i_K_A"/>
  </connection>
  
  <connection>
    <map_components component_2="leakage_channel" component_1="membrane"/>
    <map_variables variable_2="V" variable_1="V"/>
    <map_variables variable_2="i_L" variable_1="i_L"/>
  </connection>
  
  <connection>
    <map_components component_2="calcium_channel" component_1="parameters"/>
    <map_variables variable_2="i_Ca" variable_1="i_Ca"/>
    <map_variables variable_2="Ca_i" variable_1="Ca_i"/>
    <map_variables variable_2="Ca_e" variable_1="Ca_e"/>
    <map_variables variable_2="F" variable_1="F"/>
  </connection>
  
  <connection>
    <map_components component_2="delayed_rectifier_potassium_channel" component_1="parameters"/>
    <map_variables variable_2="E_K" variable_1="E_K"/>
  </connection>
  
  <connection>
    <map_components component_2="A_type_potassium_channel" component_1="parameters"/>
    <map_variables variable_2="E_K" variable_1="E_K"/>
  </connection>
  
  <connection>
    <map_components component_2="calcium_activated_potassium_channel" component_1="parameters"/>
    <map_variables variable_2="E_K" variable_1="E_K"/>
    <map_variables variable_2="Ca_i" variable_1="Ca_i"/>
    <map_variables variable_2="Ca_diss" variable_1="Ca_diss"/>
  </connection> 
  
  <connection>
    <map_components component_2="sodium_channel_m_gate" component_1="sodium_channel"/>
    <map_variables variable_2="m" variable_1="m"/>
    <map_variables variable_2="time" variable_1="time"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
  
  <connection>
    <map_components component_2="sodium_channel_h_gate" component_1="sodium_channel"/>
    <map_variables variable_2="h" variable_1="h"/>
    <map_variables variable_2="time" variable_1="time"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
  
  <connection>
    <map_components component_2="calcium_channel_c_gate" component_1="calcium_channel"/>
    <map_variables variable_2="c" variable_1="c"/>
    <map_variables variable_2="time" variable_1="time"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
  
  <connection>
    <map_components component_2="delayed_rectifier_potassium_channel_n_gate" component_1="delayed_rectifier_potassium_channel"/>
    <map_variables variable_2="n" variable_1="n"/>
    <map_variables variable_2="time" variable_1="time"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
  
  <connection>
    <map_components component_2="A_type_potassium_channel_a_gate" component_1="A_type_potassium_channel"/>
    <map_variables variable_2="a" variable_1="a"/>
    <map_variables variable_2="time" variable_1="time"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
  
  <connection>
    <map_components component_2="A_type_potassium_channel_h_gate" component_1="A_type_potassium_channel"/>
    <map_variables variable_2="h" variable_1="h"/>
    <map_variables variable_2="time" variable_1="time"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
  

<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#1a65f735-c994-4fb0-9bc4-dbdb1494fe78">
    <rdf:li>retinal ganglion cell</rdf:li>
    <rdf:li>Retinal Ganglion Cell</rdf:li>
    <rdf:li>impulse encoding</rdf:li>
    <rdf:li>retina</rdf:li>
    <rdf:li>electrophysiology</rdf:li>
    <rdf:li>neuron</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#c82f75c7-7ae7-4696-81ba-afb6207f5377">
    <rdf:li rdf:resource="rdf:#18fa0ee6-482e-41f3-a64e-a3c0c58d862e"/>
    <rdf:li rdf:resource="rdf:#3251e466-633c-4dbb-add7-f484f13b6e5e"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#05c270a1-d469-48d8-a493-84ac6ed08f3c">
    <dc:title>Journal of Neurophysiology</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#49475122-571f-4cd4-8504-6b6cfdb6a91e">
    <bqs:Pubmed_id>9325362</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#3d9e565a-e96d-4155-9ddf-3ee8db7e61ca"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#05fe6614-c9bf-4a96-98db-f2202e88a24c">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3d9e565a-e96d-4155-9ddf-3ee8db7e61ca">
    <dc:creator rdf:resource="rdf:#c82f75c7-7ae7-4696-81ba-afb6207f5377"/>
    <dc:title>
            Impulse Encoding Mechanisms of Ganglion Cells in the Tiger 
            Salamander Retina
          </dc:title>
    <bqs:volume>78</bqs:volume>
    <bqs:first_page>1935</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#05c270a1-d469-48d8-a493-84ac6ed08f3c"/>
    <dcterms:issued rdf:resource="rdf:#d2652f7f-185f-4c89-a6b9-1be3c7072cd3"/>
    <bqs:last_page>1947</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7393e336-4c50-47fa-8088-20410a6c37c9">
    <dc:creator rdf:resource="rdf:#1bc21188-22c7-4a44-b6ec-1b77b90fd67e"/>
    <rdf:value>
          This is the CellML description of Fohlmeister and Miller's 2003 
          computational model of the impulse encoding mechanics of ganglion 
          cells in the tiger salamander retina.
        </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher>
        The University of Auckland, Bioengineering Institute
      </dc:publisher>
    <dcterms:created rdf:resource="rdf:#661440f8-ae87-4261-bac7-e0a98db5177e"/>
    <dc:creator rdf:resource="rdf:#52ee5c48-3386-4a4e-9dc0-58672f56fcad"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#18fa0ee6-482e-41f3-a64e-a3c0c58d862e">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#1328a7aa-c5cb-45c2-9338-ab1a86e44bee"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d2652f7f-185f-4c89-a6b9-1be3c7072cd3">
    <dcterms:W3CDTF>1997-10</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d02825f3-f809-478e-8f51-d5d93f534fd1">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#661440f8-ae87-4261-bac7-e0a98db5177e">
    <dcterms:W3CDTF>2003-10-15</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#52ee5c48-3386-4a4e-9dc0-58672f56fcad">
    <vCard:ORG rdf:resource="rdf:#7daa3e01-f635-42b2-951b-f58997a89eda"/>
    <vCard:EMAIL rdf:resource="rdf:#d02825f3-f809-478e-8f51-d5d93f534fd1"/>
    <vCard:N rdf:resource="rdf:#05fe6614-c9bf-4a96-98db-f2202e88a24c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ba499a21-7a58-45cb-ae6c-695ed35bc46e">
    <vCard:Given>R</vCard:Given>
    <vCard:Family>Miller</vCard:Family>
    <vCard:Other>F</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="#fohlmeister_miller_1997_version01">
    <dc:title>
        Fohlmeister and Miller's 2003 computational model of the impulse 
        encoding mechanics of ganglion cells in the tiger salamander retina.
      </dc:title>
    <cmeta:bio_entity>Retinal Ganglion Cell</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#7393e336-4c50-47fa-8088-20410a6c37c9"/>
    <bqs:reference rdf:resource="rdf:#29f8eaaf-2ffb-4e8a-95d0-bd7a129e52f3"/>
    <bqs:reference rdf:resource="rdf:#49475122-571f-4cd4-8504-6b6cfdb6a91e"/>
    <cmeta:species>tiger salamander</cmeta:species>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7daa3e01-f635-42b2-951b-f58997a89eda">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#29f8eaaf-2ffb-4e8a-95d0-bd7a129e52f3">
    <dc:subject rdf:resource="rdf:#db74bc4a-fc08-4285-9aca-3c3eb95b2fe2"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3251e466-633c-4dbb-add7-f484f13b6e5e">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#ba499a21-7a58-45cb-ae6c-695ed35bc46e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1bc21188-22c7-4a44-b6ec-1b77b90fd67e">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#db74bc4a-fc08-4285-9aca-3c3eb95b2fe2">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#1a65f735-c994-4fb0-9bc4-dbdb1494fe78"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1328a7aa-c5cb-45c2-9338-ab1a86e44bee">
    <vCard:Given>J</vCard:Given>
    <vCard:Family>Fohlmeister</vCard:Family>
    <vCard:Other>F</vCard:Other>
  </rdf:Description>
</rdf:RDF>
</model>
