<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  gall_model2_1999.xml

CREATED :  10th April 2002

LAST MODIFIED : 11th August 2003

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of Gall and Susa's
1999 Na/Ca exchange in models for pancreatic beta-cells.

CHANGES:  
  18/07/2002 - CML - Added more metadata.
  09/04/2003 - AAC - Added publication date information.
  11/08/2003 - CML - Corrected equations.  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="gall_1999" name="gall_1999">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Na/Ca Exchange in Models for Pancreatic Beta-Cells</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
           This CellML model represents Model II from the published paper. The CellML matches the published equations and the model runs in OpenCell and COR but it does not replicate the published results.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: In the presence of an insulinotropic glucose concentration, beta-cells, in intact pancreatic islets, exhibit periodic bursting electrical activity consisting of an alternation of active and silent phases. The fraction of time spent in the active phase over a period is called the plateau fraction and is correlated with the rate of insulin release. However, the mechanisms that regulate the plateau fraction remain unclear. In this paper we investigate the possible role of the plasma membrane Na+/Ca2+ exchange of the beta-cell in controlling the plateau fraction. We have extended different single-cell models to incorporate this Ca2+-activated electrogenic Ca2+ transporter. We find that the Na+/Ca2+ exchange can provide a physiological mechanism to increase the plateau fraction as the glucose concentration is raised. In addition, we show theoretically that the Na+/Ca2+ exchanger is a key regulator of the cytoplasmic calcium concentration in clusters of heterogeneous cells with gap-junctional electrical coupling.  
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Effect of Na/Ca Exchange on Plateau Fraction and [Ca<superscript>2+</superscript>]<subscript>i</subscript> in Models for Bursting in Pancreatic Beta-Cells, David Gall and Isabella Susa, 1999,
            <emphasis>Biophysical Journal</emphasis>, 77, 45-53. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/10388739">PubMed ID: 10388739</ulink>  
</para>


</sect1>
</article>
</documentation>
  
  
  
  
  <units name="millisecond">
    <unit units="second" prefix="milli"/>
  </units>
  
  <units name="per_millisecond">
    <unit units="millisecond" exponent="-1"/>
  </units>
  
  <units name="picoA">
    <unit units="ampere" prefix="pico"/>
  </units>
  
  <units name="femtoF">
    <unit units="farad" prefix="femto"/>
  </units>
  
  <units name="millimolar">
    <unit units="mole" prefix="milli"/>
    <unit units="litre" exponent="-1"/>
  </units>
  
  <units name="micromolar">
    <unit units="mole" prefix="micro"/>
    <unit units="litre" exponent="-1"/>
  </units>
  
  <units name="millivolt">
    <unit units="volt" prefix="milli"/>
  </units>
  
  <units name="picoS">
    <unit units="siemens" prefix="pico"/>
  </units>
  
  <units name="mole_per_microlitre_coulomb">
    <unit units="mole"/>
    <unit units="litre" prefix="micro" exponent="-1"/>
    <unit units="coulomb" exponent="-1"/>
  </units>
  
  <component name="environment">
    <variable units="millisecond" public_interface="out" name="time"/>
  </component>
  
  <component name="membrane">
    <variable units="millivolt" public_interface="out" name="V" initial_value="-76.0"/>
    
    <variable units="femtoF" name="Cm" initial_value="5310.0"/>
    
    <variable units="millisecond" public_interface="in" name="time"/>
    <variable units="picoA" public_interface="in" name="i_Ca"/>
    <variable units="picoA" public_interface="in" name="i_K"/>
    <variable units="picoA" public_interface="in" name="i_slow"/>
    <variable units="picoA" public_interface="in" name="i_Na_Ca"/>
     
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="membrane_voltage_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> V </ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <apply>
              <plus/>
              <ci> i_K </ci>
              <ci> i_Ca </ci>
              <ci> i_slow </ci>
              <ci> i_Na_Ca </ci>
            </apply>
          </apply>
          <ci> Cm </ci>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="rapidly_activating_K_current">
    <variable units="picoA" public_interface="out" name="i_K"/>
    <variable units="millivolt" public_interface="out" name="V_K" initial_value="-75.0"/>
   
    <variable units="picoS" name="g_K" initial_value="2700.0"/>   
   
    <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
    <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
    
    <variable units="dimensionless" private_interface="in" name="n"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="i_K_calculation">
        <eq/>
        <ci> i_K </ci>
        <apply>
          <times/>
          <ci> g_K </ci>
          <ci> n </ci>
          <apply>
            <minus/>
            <ci> V </ci>
            <ci> V_K </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component> 
  
  <component name="rapidly_activating_K_current_n_gate">
    <variable units="dimensionless" public_interface="out" name="n" initial_value="0.1"/>
    
    <variable units="dimensionless" name="n_infinity"/>
    <variable units="dimensionless" name="lamda" initial_value="1.0"/>
    <variable units="millisecond" name="tau_n" initial_value="20.0"/>
    <variable units="millivolt" name="V_n" initial_value="-16.0"/>
    <variable units="millivolt" name="S_n" initial_value="5.6"/>
    
    <variable units="millivolt" public_interface="in" name="V"/>
    <variable units="millisecond" public_interface="in" name="time"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="n_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> n </ci>
        </apply>
        <apply>
          <times/>
          <ci> lamda </ci>
          <apply>
            <divide/>
            <apply>
              <minus/>
              <ci> n_infinity </ci>
              <ci> n </ci>
            </apply>
            <ci> tau_n </ci>
          </apply>
        </apply>
      </apply>
      
      <apply id="n_infinity_calculation">
        <eq/>
        <ci> n_infinity </ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless"> 1.0 </cn>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <ci> V_n </ci>
                  <ci> V </ci>
                </apply>
                <ci> S_n </ci>
              </apply>
            </apply>    
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="calcium_current">
    <variable units="picoA" public_interface="out" name="i_Ca"/>
    
    <variable units="millivolt" name="V_Ca" initial_value="25.0"/>
    <variable units="picoS" name="g_Ca" initial_value="1000.0"/>   
   
    <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
    <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
    
    <variable units="dimensionless" private_interface="in" name="m_infinity"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="i_Ca_calculation">
        <eq/>
        <ci> i_Ca </ci>
        <apply>
          <times/>
          <ci> g_Ca </ci>
          <ci> m_infinity </ci>
          <apply>
            <minus/>
            <ci> V </ci>
            <ci> V_Ca </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component> 
  
  <component name="calcium_current_m_gate">
    <variable units="dimensionless" public_interface="out" name="m_infinity"/>
    
    <variable units="millivolt" name="V_m" initial_value="-20.0"/>
    <variable units="millivolt" name="S_m" initial_value="12.0"/>
    
    <variable units="millivolt" public_interface="in" name="V"/>
    <variable units="millisecond" public_interface="in" name="time"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply id="m_infinity_calculation">
        <eq/>
        <ci> m_infinity </ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless"> 1.0 </cn>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <ci> V_m </ci>
                  <ci> V </ci>
                </apply>
                <ci> S_m </ci>
              </apply>
            </apply>    
          </apply>
        </apply>
      </apply>
    </math>
  </component>   
  
  <component name="slow_K_current">
    <variable units="picoA" public_interface="out" name="i_slow"/>
    
    <variable units="picoS" name="g_s" initial_value="200.0"/>   
     
    <variable units="millivolt" public_interface="in" name="V_K"/>
    <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
    <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
    
    <variable units="dimensionless" private_interface="in" name="s"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="i_slow_calculation">
        <eq/>
        <ci> i_slow </ci>
        <apply>
          <times/>
          <ci> g_s </ci>
          <ci> s </ci>
          <apply>
            <minus/>
            <ci> V </ci>
            <ci> V_K </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="slow_K_current_s_gate">
    <variable units="dimensionless" public_interface="out" name="s" initial_value="0.1"/>
    
    <variable units="dimensionless" name="s_infinity"/>
    <variable units="millisecond" name="tau_s" initial_value="12000.0"/>
    <variable units="millivolt" name="V_s" initial_value="-52.0"/>
    <variable units="millivolt" name="S_s" initial_value="10.0"/>
    <variable units="dimensionless" name="R_s" initial_value="0.58"/>
    <variable units="dimensionless" name="S_V_R_s"/>
    
    <variable units="millivolt" public_interface="in" name="V"/>
    <variable units="millisecond" public_interface="in" name="time"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="s_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> s </ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci> S_V_R_s </ci>
            <ci> s </ci>
          </apply>
          <ci> tau_s </ci>
        </apply>
      </apply>
      
      <apply id="S_V_R_s_calculation">
        <eq/>
        <ci> S_V_R_s </ci>
        <apply>
          <plus/>
          <ci> s_infinity </ci>
          <ci> R_s </ci>
        </apply>
      </apply>
      
      <apply id="s_infinity_calculation">
        <eq/>
        <ci> s_infinity </ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless"> 1.0 </cn>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <ci> V_s </ci>
                  <ci> V </ci>
                </apply>
                <ci> S_s </ci>
              </apply>
            </apply>    
          </apply>
        </apply>
      </apply>
    </math>
  </component> 
  
  <component name="Na_Ca_exchanger_current">
    <variable units="picoA" public_interface="out" name="i_Na_Ca"/>
    
    <variable units="picoS" name="g_Na_Ca" initial_value="350.0"/>   
    <variable units="micromolar" name="K_1_2" initial_value="1.5"/>
    <variable units="millivolt" name="V_Na_Ca"/>
    <variable units="millivolt" name="RT_F" initial_value="26.54"/>
    <variable units="dimensionless" name="nH" initial_value="5.0"/>
    
    <variable units="millisecond" public_interface="in" name="time"/>
    <variable units="millivolt" public_interface="in" name="V"/>
    <variable units="micromolar" public_interface="in" name="Ca_i"/>
    <variable units="micromolar" public_interface="in" name="Ca_o"/>
    <variable units="millimolar" public_interface="in" name="Na_i"/>
    <variable units="millimolar" public_interface="in" name="Na_o"/>
     
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="i_Na_Ca_calculation">
        <eq/>
        <ci> i_Na_Ca </ci>
        <apply>
          <times/>
          <ci> g_Na_Ca </ci>
          <apply>
            <divide/>
            <apply>
              <power/>
              <ci> Ca_i </ci>
              <ci> nH </ci>
            </apply>
            <apply>
              <plus/>
              <apply>
                <power/>
                <ci> K_1_2 </ci>
                <ci> nH </ci>
              </apply>
              <apply>
                <power/>
                <ci> Ca_i </ci>
                <ci> nH </ci>
              </apply>
            </apply>
		  </apply>
		  <apply>
            <minus/>
            <ci> V </ci>
            <ci> V_Na_Ca </ci>
          </apply>
        </apply>
      </apply>
      
      <apply id="V_Na_Ca_calculation">
        <eq/>
        <ci> V_Na_Ca </ci>
        <apply>
          <times/>
          <ci> RT_F </ci>
          <apply>
            <times/>
            <cn cellml:units="dimensionless"> 3.0 </cn>
            <apply>
              <ln/>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <ci> Na_o </ci>
                  <ci> Na_i </ci>
                </apply>
                <apply>
                  <ln/>
                  <apply>
                    <divide/>
                    <ci> Ca_o </ci>
                    <ci> Ca_i </ci>
                  </apply>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>         
    </math>
  </component>
  
  <component name="ionic_concentrations">
    <variable units="micromolar" public_interface="out" name="Ca_i" initial_value="0.52"/>
    <variable units="micromolar" public_interface="out" name="Ca_o" initial_value="2600.0"/>
    <variable units="millimolar" public_interface="out" name="Na_i" initial_value="10.0"/>
    <variable units="millimolar" public_interface="out" name="Na_o" initial_value="140.0"/>
    
    <variable units="micromolar" name="Ca_ret" initial_value="0.7"/>          
    <variable units="dimensionless" name="f" initial_value="0.02"/> 
    <variable units="per_millisecond" name="k_Ca" initial_value="0.64"/>
    <variable units="per_millisecond" name="k_rel" initial_value="0.0006"/>
    <variable units="per_millisecond" name="k_pump" initial_value="0.2"/>
    <variable units="mole_per_microlitre_coulomb" name="alpha" initial_value="0.00006"/>
    
    <variable units="millisecond" public_interface="in" name="time"/>
    <variable units="picoA" public_interface="in" name="i_Ca"/>
    <variable units="picoA" public_interface="in" name="i_Na_Ca"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Ca_i_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> Ca_i </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> f </ci>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <apply>
                    <minus/>
                    <ci> alpha </ci>
                  </apply>
                  <apply>
                    <minus/>
                    <ci> i_Ca </ci>
                    <apply>
                      <times/>
                      <cn cellml:units="dimensionless"> 2.0 </cn>
                      <ci> i_Na_Ca </ci>
                    </apply> 
                  </apply>
                </apply>
                <apply>
                  <times/>
                  <ci> k_Ca </ci>
                  <ci> Ca_i </ci>
                </apply> 
              </apply> 
            </apply>
            <apply>
              <times/>
              <ci> k_rel </ci>
              <apply>
                <minus/>
                <ci> Ca_ret </ci>
                <ci> Ca_i </ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> k_pump </ci>
            <ci> Ca_i </ci>
          </apply>
        </apply>  
      </apply>
      
      <apply id="Ca_ret_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> Ca_ret </ci>
        </apply>
        <apply>
          <plus/>
          <apply>
            <times/>
            <apply>
              <minus/>
              <ci> k_rel </ci>
            </apply>
            <apply>
              <minus/>
              <ci> Ca_ret </ci>
              <ci> Ca_i </ci>
            </apply> 
          </apply>
          <apply>
            <times/>
            <ci> k_pump </ci>
            <ci> Ca_i </ci>
          </apply>
        </apply> 
      </apply> 
    </math>
  </component>
  
  
  <group>
    <relationship_ref relationship="encapsulation"/>
    <component_ref component="calcium_current">
      <component_ref component="calcium_current_m_gate"/>
    </component_ref>
    <component_ref component="rapidly_activating_K_current">
      <component_ref component="rapidly_activating_K_current_n_gate"/>
    </component_ref>
    <component_ref component="slow_K_current">
      <component_ref component="slow_K_current_s_gate"/>
    </component_ref>
  </group>
  
  <connection>
    <map_components component_2="environment" component_1="membrane"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="rapidly_activating_K_current"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="calcium_current"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="slow_K_current"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Na_Ca_exchanger_current"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="ionic_concentrations"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="calcium_current" component_1="membrane"/>
    <map_variables variable_2="V" variable_1="V"/>
    <map_variables variable_2="i_Ca" variable_1="i_Ca"/>
  </connection> 
  
  <connection>
    <map_components component_2="rapidly_activating_K_current" component_1="membrane"/>
    <map_variables variable_2="V" variable_1="V"/>
    <map_variables variable_2="i_K" variable_1="i_K"/>
  </connection>
  
  <connection>
    <map_components component_2="slow_K_current" component_1="membrane"/>
    <map_variables variable_2="V" variable_1="V"/>
    <map_variables variable_2="i_slow" variable_1="i_slow"/>
  </connection> 
  
  <connection>
    <map_components component_2="Na_Ca_exchanger_current" component_1="membrane"/>
    <map_variables variable_2="V" variable_1="V"/>
    <map_variables variable_2="i_Na_Ca" variable_1="i_Na_Ca"/>
  </connection>
  
  <connection>
    <map_components component_2="slow_K_current" component_1="rapidly_activating_K_current"/>
    <map_variables variable_2="V_K" variable_1="V_K"/>
  </connection>
  
  <connection>
    <map_components component_2="calcium_current" component_1="ionic_concentrations"/>
    <map_variables variable_2="i_Ca" variable_1="i_Ca"/>
  </connection>
  
  <connection>
    <map_components component_2="Na_Ca_exchanger_current" component_1="ionic_concentrations"/>
    <map_variables variable_2="i_Na_Ca" variable_1="i_Na_Ca"/>
    <map_variables variable_2="Ca_i" variable_1="Ca_i"/>
    <map_variables variable_2="Na_i" variable_1="Na_i"/>
    <map_variables variable_2="Ca_o" variable_1="Ca_o"/>
    <map_variables variable_2="Na_o" variable_1="Na_o"/>
  </connection> 
  
  <connection>
    <map_components component_2="calcium_current_m_gate" component_1="calcium_current"/>
    <map_variables variable_2="m_infinity" variable_1="m_infinity"/>
    <map_variables variable_2="time" variable_1="time"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
  
  <connection>
    <map_components component_2="rapidly_activating_K_current_n_gate" component_1="rapidly_activating_K_current"/>
    <map_variables variable_2="n" variable_1="n"/>
    <map_variables variable_2="time" variable_1="time"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
  
  <connection>
    <map_components component_2="slow_K_current_s_gate" component_1="slow_K_current"/>
    <map_variables variable_2="s" variable_1="s"/>
    <map_variables variable_2="time" variable_1="time"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
  






<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#3843566d-f5fa-46dc-8cbe-ad5b52d97f4a">
    <rdf:li>Pancreatic Beta-Cell</rdf:li>
    <rdf:li>calcium dynamics</rdf:li>
    <rdf:li>electrophysiology</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#citationAuthorsSeq">
    <rdf:li rdf:resource="rdf:#author1Vcard"/>
    <rdf:li rdf:resource="rdf:#author2Vcard"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#374b1e4e-a3b0-4bb3-bd84-c262fe4b9af1">
    <dcterms:modified rdf:resource="rdf:#15b0de58-740b-4f7f-9f23-31274d7d8e1a"/>
    <rdf:value>
          Added publication date information.
        </rdf:value>
    <cmeta:modifier rdf:resource="rdf:#69625b0e-5e9e-475d-915f-9d683499cad6"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e8e8a452-4e75-49a4-93f5-dafd641fb9d3">
    <dcterms:W3CDTF>1999-07-01</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f5161421-0c67-46c1-8fdc-6511625a5031">
    <dcterms:W3CDTF>2002-04-10</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#author1VcardN">
    <vCard:Given>David</vCard:Given>
    <vCard:Family>Gall</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#75e129ea-06df-49c1-8dbc-7a0d0ed13a41">
    <vCard:N rdf:resource="rdf:#93277257-3472-4518-8877-138c74656832"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#78cd6a38-875a-4165-8160-1c1ded721f61">
    <dcterms:W3CDTF>2002-07-18</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#69625b0e-5e9e-475d-915f-9d683499cad6">
    <vCard:N rdf:resource="rdf:#614a273f-089c-4c00-923b-8558cdbd72aa"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e4f74cd9-f23b-4530-bd35-13fa40af2e21">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8b103f7c-ada1-4105-a136-aedac7b8d820">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d53bcb5e-5087-4538-9d8c-1a6bb872d784">
    <dc:creator rdf:resource="rdf:#4677b95a-2e8a-41d2-8f04-9e9c8b249190"/>
    <rdf:value>This is the CellML description of Gall and Susa's 1999 model of Na/Ca exchange in Model II for pancreatic beta-cells.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#750b06e5-057e-4aa5-a688-d190f4047041">
    <dcterms:modified rdf:resource="rdf:#7f4eed58-39f4-4fc0-8723-68988f300ca8"/>
    <rdf:value>
          Added more metadata.
        </rdf:value>
    <cmeta:modifier rdf:resource="rdf:#75e129ea-06df-49c1-8dbc-7a0d0ed13a41"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4677b95a-2e8a-41d2-8f04-9e9c8b249190">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#17d9527a-b25f-48be-abd7-fad09b178785">
    <dc:subject rdf:resource="rdf:#92607231-bf2f-4a35-8438-fe5d4929b5de"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#91c594c0-53c7-4ec4-b5a8-cbeb0ac26c8d">
    <bqs:Pubmed_id>10388739</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#1d5fbf02-9e9e-4bcc-bb19-7544470d23f9"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#92607231-bf2f-4a35-8438-fe5d4929b5de">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#3843566d-f5fa-46dc-8cbe-ad5b52d97f4a"/>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:title>Effect of Na/Ca Exchange on Plateau Fraction and [Ca]i in Models for Bursting in Pancreatic Beta-Cells (Model B)</dc:title>
	<dc:publisher>
        The University of Auckland, Bioengineering Institute
      </dc:publisher>
    <cmeta:modification rdf:resource="rdf:#374b1e4e-a3b0-4bb3-bd84-c262fe4b9af1"/>
    <cmeta:modification rdf:resource="rdf:#750b06e5-057e-4aa5-a688-d190f4047041"/>
    <cmeta:modification rdf:resource="rdf:#b4042013-15bf-43a5-89af-0f49f893777b"/>
    <dcterms:created rdf:resource="rdf:#f5161421-0c67-46c1-8fdc-6511625a5031"/>
    <dc:creator rdf:resource="rdf:#94ae9ffc-eac9-4900-85c0-28f960cbee2f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#93277257-3472-4518-8877-138c74656832">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7f4eed58-39f4-4fc0-8723-68988f300ca8">
    <dcterms:W3CDTF>2002-07-18</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6fc93dd8-d083-4ed3-b025-0d5a2a1a5e53">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b4042013-15bf-43a5-89af-0f49f893777b">
    <dcterms:modified rdf:resource="rdf:#78cd6a38-875a-4165-8160-1c1ded721f61"/>
    <rdf:value>
          Corrected dV/dt equation in membrane component.
        </rdf:value>
    <cmeta:modifier rdf:resource="rdf:#74ac7c47-adab-4789-b690-950ff7a1f3df"/>
  </rdf:Description>
  <rdf:Description rdf:about="#gall_1999">
    <dc:title>
        The Gall and Susa 1999 model of Na/Ca exchange in Model II for                   pancreatic beta-cells.
      </dc:title>
    <cmeta:bio_entity>Pancreatic Beta-Cell</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#d53bcb5e-5087-4538-9d8c-1a6bb872d784"/>
    <bqs:reference rdf:resource="rdf:#17d9527a-b25f-48be-abd7-fad09b178785"/>
    <bqs:reference rdf:resource="rdf:#91c594c0-53c7-4ec4-b5a8-cbeb0ac26c8d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#author2Vcard">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#author2VcardN"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#614a273f-089c-4c00-923b-8558cdbd72aa">
    <vCard:Given>Autumn</vCard:Given>
    <vCard:Family>Cuellar</vCard:Family>
    <vCard:Other>A</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7d834884-8726-4a64-bbae-86da959dd5aa">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#author2VcardN">
    <vCard:Given>Isabella</vCard:Given>
    <vCard:Family>Susa</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#94ae9ffc-eac9-4900-85c0-28f960cbee2f">
    <vCard:ORG rdf:resource="rdf:#8b103f7c-ada1-4105-a136-aedac7b8d820"/>
    <vCard:EMAIL rdf:resource="rdf:#e4f74cd9-f23b-4530-bd35-13fa40af2e21"/>
    <vCard:N rdf:resource="rdf:#6fc93dd8-d083-4ed3-b025-0d5a2a1a5e53"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#74ac7c47-adab-4789-b690-950ff7a1f3df">
    <vCard:N rdf:resource="rdf:#7d834884-8726-4a64-bbae-86da959dd5aa"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9bc7b5eb-ce3a-4376-91ad-6d85205853d1">
    <dc:title>Biophysical Journal</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#author1Vcard">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#author1VcardN"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1d5fbf02-9e9e-4bcc-bb19-7544470d23f9">
    <dc:creator rdf:resource="rdf:#citationAuthorsSeq"/>
    <dc:title>Effect of Na/Ca Exchange on Plateau Fraction and [Ca]i in Models for Bursting in Pancreatic Beta-Cells</dc:title>
    <bqs:volume>77</bqs:volume>
    <bqs:first_page>45</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#9bc7b5eb-ce3a-4376-91ad-6d85205853d1"/>
    <dcterms:issued rdf:resource="rdf:#e8e8a452-4e75-49a4-93f5-dafd641fb9d3"/>
    <bqs:last_page>53</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#15b0de58-740b-4f7f-9f23-31274d7d8e1a">
    <dcterms:W3CDTF>2003-04-09</dcterms:W3CDTF>
  </rdf:Description>
</rdf:RDF>
</model>