// This CellML file was generated on 28/01/2008 at 16:45:18 using:
//
// COR (0.9.31.863)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// title: Rate dependence and regulation of action potential and calcium transient in a canine cardiac ventricular cell model (Basic Model)
// creator: Given Penny; Family Noble; penny.noble@dpag.ox.ac.uk; Orgname University of Oxford
// modification: W3CDTF 2008-06-18T11:54:20+12:00; -Changed model cmeta:id, removed version -added simulation metadata, model integrates for 5 seconds; Given James; Family Lawson; Other Richard
// created: W3CDTF 2008-06-18T00:00:00+00:00
// comment: FN Penny Noble; This CellML version of the model has been checked in COR. The units are consistent and the model runs to recreate the published results. The parameter 'tissue' has been added to switch between the original (default value 0) and 'tissue' (any other value, for example 1) models. In the paper described here, Thomas Hund and Yoram Rudy present a detailed, and physiologically realistic, mathematical model of a canine ventricular cell. Model simulations are able to recreate the rate-dependent phenomena associated with ion-channel kinetics, action potential properties, and calcium ion handling. The model is based on an epicardial myocyte because these cells contain the largest transient outward potassium current (when compared with endocardial or midmyocardial myocytes). The calcium/calmodulin-dependent protein kinase (CaMKII) regulatory pathway was embedded within the electrophysiological model, incorporating calcium-release formulation, calcium subspace, and dynamic chloride handling. Results from the model simulations revealed CaMKII is an important determinant of the rate dependence of the calcium transient, but not of the action potential duration, which depends instead on the ion-channel kinetics.
// simulation: pointDensity 10000; maximumStepSize 0.1; endingValue 5000
// simulation: pointDensity 10000; maximumStepSize 0.1; endingValue 5000
// reference: Pubmed_id 15505083; Given Thomas J; Family Hund; Given Yoram; Family Rudy; first_page 3168; title Circulation; W3CDTF 2004-11-16 00:00; volume 110; last_page 3174; title Rate dependence and regulation of action potential and calcium transient in a canine cardiac ventricular cell model
// reference: _1 cardiac electrophysiology; _2 canine; _3 ventricular; _4 calcium; _5 electrophysiology; _6 cardiac; _7 carciac myocyte; _8 myocyte; subject_type keyword
def model hund_rudy_2004 as
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML version of the model has been checked in COR and OpenCell. A stimulus protocol has been added to allow the model to simulate action potentials for 5 seconds. The units are consistent and the model runs to recreate the published results. The parameter 'tissue' has been added to switch between the original (default value 0) and 'tissue' (any other value, for example 1) models.
  //
  // Model Structure
  //
  // ABSTRACT: BACKGROUND: Computational biology is a powerful tool for elucidating arrhythmogenic mechanisms at the cellular level, where complex interactions between ionic processes determine behavior. A novel theoretical model of the canine ventricular epicardial action potential and calcium cycling was developed and used to investigate ionic mechanisms underlying Ca2+ transient (CaT) and action potential duration (APD) rate dependence. METHODS AND RESULTS: The Ca2+/calmodulin-dependent protein kinase (CaMKII) regulatory pathway was integrated into the model, which included a novel Ca2+-release formulation, Ca2+ subspace, dynamic chloride handling, and formulations for major ion currents based on canine ventricular data. Decreasing pacing cycle length from 8000 to 300 ms shortened APD primarily because of I(Ca(L)) reduction, with additional contributions from I(to1), I(NaK), and late I(Na). CaT amplitude increased as cycle length decreased from 8000 to 500 ms. This positive rate-dependent property depended on CaMKII activity. CONCLUSIONS: CaMKII is an important determinant of the rate dependence of CaT but not of APD, which depends on ion-channel kinetics. The model of CaMKII regulation may serve as a paradigm for modeling effects of other regulatory pathways on cell function.
  //
  // model diagram
  //
  // Schematic diagram of the Hund and Rudy 2004 Canine Ventricular Cell Model.
  //
  // The original paper reference is cited below:
  //
  // Rate dependence and regulation of action potential and calcium transient in a canine cardiac ventricular cell model, Thomas J. Hund and Yoram Rudy, 2004, Circulation, 110, 3168-3174. PubMed ID: 15505083 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=15505083&query_hl=1&itool=pubmed_docsum)
  def unit m2u as
    unit second {pref: micro};
    unit second {pref: milli, expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit uA_per_uF as
    unit ampere {pref: micro};
    unit farad {pref: micro, expo: -1};
  enddef;
  def unit mS_per_uF as
    unit siemens {pref: milli};
    unit farad {pref: micro, expo: -1};
  enddef;
  def unit uL as
    unit litre {pref: micro};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit mV {expo: -1};
  enddef;
  def unit uF as
    unit farad {pref: micro};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit cm2 as
    unit metre {pref: centi, expo: 2};
  enddef;
  def unit mJ_per_mole_K as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit C_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit uF_per_cm2 as
    unit farad {pref: micro};
    unit cm2 {expo: -1};
  enddef;
  def unit uF_mole_per_C as
    unit uF;
    unit mole;
    unit coulomb {expo: -1};
  enddef;
  def unit L_per_F_ms as
    unit litre;
    unit farad {expo: -1};
    unit per_ms;
  enddef;

  def comp Environment as
    var time: ms {pub: out};
    var F: C_per_mole {init: 96485, pub: out};
    var K_o: mM {init: 5.4, pub: out};
    var Ca_o: mM {init: 1.8, pub: out};
    var Na_o: mM {init: 140, pub: out};
    var Cl_o: mM {init: 100, pub: out};
    var FonRT: per_mV {init: 0.0374358835078, pub: out};
    var tissue: dimensionless {init: 1, pub: out};
  enddef;

  def comp cell as
    var time: ms {pub: in};
    var V: mV {init: -85.781844107117, pub: out};
    var F: C_per_mole {pub: in};
    var INa: uA_per_uF {pub: in};
    var ICaL: uA_per_uF {pub: in};
    var IK1: uA_per_uF {pub: in};
    var IKp: uA_per_uF {pub: in};
    var IKs: uA_per_uF {pub: in};
    var IKr: uA_per_uF {pub: in};
    var IpCa: uA_per_uF {pub: in};
    var ICab: uA_per_uF {pub: in};
    var INaCa: uA_per_uF {pub: in};
    var INaK: uA_per_uF {pub: in};
    var Ito: uA_per_uF {pub: in};
    var Ito2: uA_per_uF {pub: in};
    var IClb: uA_per_uF {pub: in};
    var INal: uA_per_uF {pub: in};
    var caiont: uA_per_uF;
    var naiont: uA_per_uF {pub: out};
    var kiont: uA_per_uF {pub: out};
    var clont: uA_per_uF {pub: out};
    var l: cm {init: 0.01};
    var a: cm {init: 0.0011};
    var vcell: uL;
    var ageo: cm2;
    var Acap: uF;
    var vmyo: uL {pub: out};
    var vmito: uL;
    var vsr: uL {pub: out};
    var vnsr: uL {pub: out};
    var vjsr: uL {pub: out};
    var vss: uL {pub: out};
    var AF: uF_mole_per_C {pub: out};
    var stim_offset: ms {init: 0};
    var stim_period: ms {init: 1e3};
    var stim_duration: ms {init: 3};
    var stim_amplitude: uA_per_uF {init: -15};
    var i_Stim: uA_per_uF {pub: out};
    var past: ms;
    vcell = 1000{m2u}*pi*a*a*l;
    ageo = 2{dimensionless}*pi*a*a+2{dimensionless}*pi*a*l;
    Acap = ageo*2{uF_per_cm2};
    vmyo = vcell*0.68{dimensionless};
    vmito = vcell*0.26{dimensionless};
    vsr = vcell*0.06{dimensionless};
    vnsr = vcell*0.0552{dimensionless};
    vjsr = vcell*0.0048{dimensionless};
    vss = vcell*0.02{dimensionless};
    AF = Acap/F;
    past = floor(time/stim_period)*stim_period;
    i_Stim = sel
      case (time-past >= stim_offset) and (time-past <= stim_offset+stim_duration):
        stim_amplitude;
      otherwise:
        0{uA_per_uF};
    endsel;
    caiont = ICaL+ICab+IpCa-2{dimensionless}*INaCa;
    naiont = INa+3{dimensionless}*INaCa+3{dimensionless}*INaK+INal;
    kiont = IKr+IKs+IK1+IKp-2{dimensionless}*INaK+Ito+0.5{dimensionless}*i_Stim;
    clont = IClb+Ito2+0.5{dimensionless}*i_Stim;
    ode(V, time) = -(naiont+kiont+caiont+clont);
  enddef;

  def comp INa as
    var V: mV {pub: in};
    var time: ms {pub: in};
    var ENa: mV {pub: in};
    var tissue: dimensionless {pub: in};
    var GNa: mS_per_uF;
    var gNa: mS_per_uF;
    var H: dimensionless {init: 0.987317750543};
    var m: dimensionless {init: 0.001356538159};
    var J: dimensionless {init: 0.991924983076};
    var am: per_ms;
    var bm: per_ms;
    var ah: per_ms;
    var bh: per_ms;
    var aj: per_ms;
    var bj: per_ms;
    var INa: uA_per_uF {pub: out};
    GNa = sel
      case tissue == 0{dimensionless}:
        8.25{mS_per_uF};
      otherwise:
        4{dimensionless}*8.25{mS_per_uF};
    endsel;
    gNa = GNa*m*m*m*H*J;
    INa = gNa*(V-ENa);
    ah = sel
      case V >= -40{mV}:
        0{per_ms};
      otherwise:
        0.135{per_ms}*exp((80{mV}+V)/(-6.8{mV}));
    endsel;
    aj = sel
      case V >= -40{mV}:
        0{per_ms};
      otherwise:
        (-1.2714e5{per_ms}*exp(0.2444{per_mV}*V)-3.474e-5{per_ms}*exp(-0.04391{per_mV}*V))*1{per_mV}*(V+37.78{mV})/(1{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV})));
    endsel;
    bh = sel
      case V >= -40{mV}:
        1{per_ms}/(0.13{dimensionless}*(1{dimensionless}+exp((V+10.66{mV})/(-11.1{mV}))));
      otherwise:
        3.56{per_ms}*exp(0.079{per_mV}*V)+3.1e5{per_ms}*exp(0.35{per_mV}*V);
    endsel;
    bj = sel
      case V >= -40{mV}:
        0.3{per_ms}*exp(-2.535e-7{per_mV}*V)/(1{dimensionless}+exp(-0.1{per_mV}*(V+32{mV})));
      otherwise:
        0.1212{per_ms}*exp(-0.01052{per_mV}*V)/(1{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV})));
    endsel;
    am = 0.32{per_ms}*1{per_mV}*(V+47.13{mV})/(1{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    bm = 0.08{per_ms}*exp(-V/11{mV});
    ode(H, time) = ah*(1{dimensionless}-H)-bh*H;
    ode(m, time) = am*(1{dimensionless}-m)-bm*m;
    ode(J, time) = aj*(1{dimensionless}-J)-bj*J;
  enddef;

  def comp ICaL as
    var V: mV {pub: in};
    var F: C_per_mole {pub: in};
    var FonRT: per_mV {pub: in};
    var time: ms {pub: in};
    var tissue: dimensionless {pub: in};
    var Ca_o: mM {pub: in};
    var Ca_ss: mM {pub: in};
    var d: dimensionless {init: 0.00000164013};
    var dp: dimensionless {init: 8.98230672628};
    var f: dimensionless {init: 0.999961508634};
    var fca: dimensionless {init: 0.97836624923};
    var fca2: dimensionless {init: 0.893052931249};
    var f2: dimensionless {init: 0.992234519148};
    var pca: L_per_F_ms {init: 2.43e-4};
    var gacai: dimensionless {init: 1};
    var gacao: dimensionless {init: 0.341};
    var CaMKactive: dimensionless {pub: in};
    var ibarca: uA_per_uF {pub: out};
    var dss: dimensionless;
    var taud: ms;
    var fss: dimensionless;
    var f2ss: dimensionless;
    var tauf: ms;
    var tauf2: ms;
    var dpss: dimensionless;
    var fcass: dimensionless;
    var fca2ss: dimensionless;
    var taufca: ms;
    var taufca2: ms;
    var ICaL: uA_per_uF {pub: out};
    ibarca = pca*4{dimensionless}*(V-15{mV})*F*FonRT*(gacai*Ca_ss*exp(2{dimensionless}*(V-15{mV})*FonRT)-gacao*Ca_o)/(exp(2{dimensionless}*(V-15{mV})*FonRT)-1{dimensionless});
    ICaL = sel
      case tissue == 0{dimensionless}:
        pow(d, dp)*f*f2*fca*fca2*ibarca;
      otherwise:
        d*f*f2*fca*fca2*ibarca;
    endsel;
    dss = 1{dimensionless}/(1{dimensionless}+exp(-(V-4{mV})/6.74{mV}));
    taud = 0.59{ms}+0.8{ms}*exp(0.052{per_mV}*(V+13{mV}))/(1{dimensionless}+exp(0.132{per_mV}*(V+13{mV})));
    fss = 0.7{dimensionless}/(1{dimensionless}+exp((V+17.12{mV})/7{mV}))+0.3{dimensionless};
    f2ss = 0.77{dimensionless}/(1{dimensionless}+exp((V+17.12{mV})/7{mV}))+0.23{dimensionless};
    tauf = 1{ms}/(0.2411{dimensionless}*exp(-sqr(0.045{per_mV}*(V-9.6914{mV})))+0.0529{dimensionless});
    tauf2 = 1{ms}/(0.0423{dimensionless}*exp(-sqr(0.059{per_mV}*(V-18.5726{mV})))+0.0054{dimensionless});
    dpss = 9{dimensionless}-8{dimensionless}/(1{dimensionless}+exp(-(V+65{mV})/3.4{mV}));
    fcass = 0.3{dimensionless}/(1{dimensionless}-ICaL/0.05{uA_per_uF})+0.55{dimensionless}/(1{dimensionless}+Ca_ss/0.003{mM})+0.15{dimensionless};
    fca2ss = 1{dimensionless}/(1{dimensionless}-ICaL/0.01{uA_per_uF});
    taufca = 10{ms}*CaMKactive/(0.15{dimensionless}+CaMKactive)+1{ms}/(1{dimensionless}+Ca_ss/0.003{mM})+0.5{ms};
    taufca2 = 300{ms}/(1{dimensionless}+exp((-ICaL-0.175{uA_per_uF})/0.04{uA_per_uF}))+125{ms};
    ode(d, time) = (dss-d)/taud;
    ode(dp, time) = (dpss-dp)/10{ms};
    ode(f, time) = (fss-f)/tauf;
    ode(f2, time) = (f2ss-f2)/tauf2;
    ode(fca, time) = (fcass-fca)/taufca;
    ode(fca2, time) = (fca2ss-fca2)/taufca2;
  enddef;

  def comp IK1 as
    var V: mV {pub: in};
    var EK: mV {pub: in};
    var K_o: mM {pub: in};
    var ak1: per_ms;
    var bk1: per_ms;
    var IK1: uA_per_uF {pub: out};
    ak1 = 1.02{per_ms}/(1{dimensionless}+exp(0.2385{per_mV}*(V-EK-59.215{mV})));
    bk1 = (0.49124{per_ms}*exp(0.08032{per_mV}*(V-EK+5.476{mV}))+1{per_ms}*exp(0.06175{per_mV}*(V-EK-594.31{mV})))/(1{dimensionless}+exp(-0.5143{per_mV}*(V-EK+4.753{mV})));
    IK1 = 0.5{mS_per_uF}*sqrt(K_o/5.4{mM})*ak1/(ak1+bk1)*(V-EK);
  enddef;

  def comp IKr as
    var V: mV {pub: in};
    var gkr: mS_per_uF;
    var gkr_const: mS_per_uF {init: 0.0138542};
    var EK: mV {pub: in};
    var K_o: mM {pub: in};
    var r: dimensionless;
    var xr: dimensionless {init: 0.00000724074};
    var xrss: dimensionless;
    var tauxr: ms;
    var time: ms {pub: in};
    var IKr: uA_per_uF {pub: out};
    gkr = gkr_const*sqrt(K_o/5.4{mM});
    r = 1{dimensionless}/(1{dimensionless}+exp((V+10{mV})/15.4{mV}));
    IKr = gkr*xr*r*(V-EK);
    xrss = 1{dimensionless}/(1{dimensionless}+exp(-(V+10.085{mV})/4.25{mV}));
    tauxr = 1{ms}/(6e-4{per_mV}*(V-1.7384{mV})/(1{dimensionless}-exp(-0.136{per_mV}*(V-1.7384{mV})))+3e-4{per_mV}*(V+38.3608{mV})/(exp(0.1522{per_mV}*(V+38.3608{mV}))-1{dimensionless}));
    ode(xr, time) = (xrss-xr)/tauxr;
  enddef;

  def comp IKs as
    var V: mV {pub: in};
    var Ca_i: mM {pub: in};
    var time: ms {pub: in};
    var gks: mS_per_uF;
    var EKs: mV {pub: in};
    var xss: dimensionless;
    var tauxs: ms;
    var xs1: dimensionless {init: 0.019883138161};
    var xs2: dimensionless {init: 0.019890650554};
    var IKs: uA_per_uF {pub: out};
    gks = 0.0248975{mS_per_uF}*(1{dimensionless}+0.6{dimensionless}/(1{dimensionless}+pow(3.8e-5{mM}/Ca_i, 1.4{dimensionless})));
    xss = 1{dimensionless}/(1{dimensionless}+exp(-(V-10.5{mV})/24.7{mV}));
    tauxs = 1{ms}/(7.61e-5{per_mV}*(V+44.6{mV})/(1{dimensionless}-exp(-9.97{per_mV}*(V+44.6{mV})))+3.6e-4{per_mV}*(V-0.55{mV})/(exp(0.128{per_mV}*(V-0.55{mV}))-1{dimensionless}));
    IKs = gks*xs1*xs2*(V-EKs);
    ode(xs1, time) = (xss-xs1)/tauxs;
    ode(xs2, time) = (xss-xs2)/tauxs/2{dimensionless};
  enddef;

  def comp Ito as
    var V: mV {pub: in};
    var gitodv: mS_per_uF {init: 0.19};
    var EK: mV {pub: in};
    var rv: dimensionless;
    var ay: per_ms;
    var by: per_ms;
    var ay2: per_ms;
    var by2: per_ms;
    var ay3: per_ms;
    var by3: per_ms;
    var time: ms {pub: in};
    var ydv: dimensionless {init: 0.013970786703};
    var ydv2: dimensionless {init: 0.99996472752};
    var zdv: dimensionless {init: 0.829206149767};
    var Ito: uA_per_uF {pub: out};
    rv = exp(V/300{mV});
    ay = 25{per_ms}*exp((V-40{mV})/25{mV})/(1{dimensionless}+exp((V-40{mV})/25{mV}));
    by = 25{per_ms}*exp(-(V+90{mV})/25{mV})/(1{dimensionless}+exp(-(V+90{mV})/25{mV}));
    ay2 = 0.03{per_ms}/(1{dimensionless}+exp((V+60{mV})/5{mV}));
    by2 = 0.2{per_ms}*exp((V+25{mV})/5{mV})/(1{dimensionless}+exp((V+25{mV})/5{mV}));
    ay3 = 0.00225{per_ms}/(1{dimensionless}+exp((V+60{mV})/5{mV}));
    by3 = 0.1{per_ms}*exp((V+25{mV})/5{mV})/(1{dimensionless}+exp((V+25{mV})/5{mV}));
    Ito = gitodv*pow(ydv, 3{dimensionless})*ydv2*zdv*rv*(V-EK);
    ode(ydv, time) = ay*(1{dimensionless}-ydv)-by*ydv;
    ode(ydv2, time) = ay2*(1{dimensionless}-ydv2)-by2*ydv2;
    ode(zdv, time) = ay3*(1{dimensionless}-zdv)-by3*zdv;
  enddef;

  def comp INaK as
    var V: mV {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var K_o: mM {pub: in};
    var FonRT: per_mV {pub: in};
    var kmnai: mM {init: 10};
    var kmko: mM {init: 1.5};
    var ibarnak: uA_per_uF {init: 0.61875};
    var sigma: dimensionless;
    var fnak: dimensionless;
    var INaK: uA_per_uF {pub: out};
    sigma = (exp(Na_o/67.3{mM})-1{dimensionless})/7{dimensionless};
    fnak = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*FonRT)+0.0365{dimensionless}*sigma*exp(-V*FonRT));
    INaK = ibarnak*fnak*1{dimensionless}/(1{dimensionless}+sqr(kmnai/Na_i))*K_o/(K_o+kmko);
  enddef;

  def comp INaCa as
    var V: mV {pub: in};
    var FonRT: per_mV {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var ca_i_NaCa: mM;
    var KmCa: mM {init: 1.25e-4};
    var allo: dimensionless;
    var NCXmax: uA_per_uF {init: 4.5};
    var ksat: dimensionless {init: 0.27};
    var eta: dimensionless {init: 0.35};
    var KmNai: mM {init: 12.3};
    var KmNao: mM {init: 87.5};
    var KmCai: mM {init: 0.0036};
    var KmCao: mM {init: 1.3};
    var num: mM4;
    var denom1: dimensionless;
    var denom2: mM4;
    var denom3: mM4;
    var INaCa: uA_per_uF {pub: out};
    ca_i_NaCa = 1.5{dimensionless}*Ca_i;
    allo = 1{dimensionless}/(1{dimensionless}+sqr(KmCa/ca_i_NaCa));
    num = pow(Na_i, 3{dimensionless})*Ca_o*exp(eta*V*FonRT)-pow(Na_o, 3{dimensionless})*ca_i_NaCa*exp((eta-1{dimensionless})*V*FonRT);
    denom1 = 1{dimensionless}+ksat*exp((eta-1{dimensionless})*V*FonRT);
    denom2 = KmCao*pow(Na_i, 3{dimensionless})+pow(KmNao, 3{dimensionless})*ca_i_NaCa+pow(KmNai, 3{dimensionless})*Ca_o*(1{dimensionless}+ca_i_NaCa/KmCai);
    denom3 = KmCai*pow(Na_o, 3{dimensionless})*(1{dimensionless}+pow(Na_i/KmNai, 3{dimensionless}))+pow(Na_i, 3{dimensionless})*Ca_o+pow(Na_o, 3{dimensionless})*ca_i_NaCa;
    INaCa = NCXmax*allo*num/(denom1*(denom2+denom3));
  enddef;

  def comp IKp as
    var V: mV {pub: in};
    var EK: mV {pub: in};
    var IKp: uA_per_uF {pub: out};
    IKp = 0.00276{mS_per_uF}*(V-EK)/(1{dimensionless}+exp((7.488{mV}-V)/5.98{mV}));
  enddef;

  def comp IpCa as
    var Ca_i: mM {pub: in};
    var ibarpca: uA_per_uF {init: 0.0575};
    var kmpca: mM {init: 0.5e-3};
    var IpCa: uA_per_uF {pub: out};
    IpCa = ibarpca*Ca_i/(kmpca+Ca_i);
  enddef;

  def comp ICab as
    var V: mV {pub: in};
    var F: C_per_mole {pub: in};
    var FonRT: per_mV {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var ICab: uA_per_uF {pub: out};
    ICab = 1.995084e-7{L_per_F_ms}*4{dimensionless}*V*F*FonRT*(Ca_i*exp(2{dimensionless}*V*FonRT)-0.341{dimensionless}*Ca_o)/(exp(2{dimensionless}*V*FonRT)-1{dimensionless});
  enddef;

  def comp Ito2 as
    var time: ms {pub: in};
    var V: mV {pub: in};
    var F: C_per_mole {pub: in};
    var FonRT: per_mV {pub: in};
    var Cl_i: mM {pub: in};
    var Cl_o: mM {pub: in};
    var Ca_ss: mM {pub: in};
    var PCl: L_per_F_ms {init: 4e-7};
    var AA: dimensionless {init: 0.000816605172};
    var Ito2_max: uA_per_uF;
    var AAss: dimensionless;
    var Kmto2: mM {init: 0.1502};
    var Ito2: uA_per_uF {pub: out};
    Ito2_max = PCl*V*F*FonRT*(Cl_i-Cl_o*exp(V*FonRT))/(1{dimensionless}-exp(V*FonRT));
    AAss = 1{dimensionless}/(1{dimensionless}+Kmto2/Ca_ss);
    Ito2 = Ito2_max*AA;
    ode(AA, time) = (AAss-AA)/1{ms};
  enddef;

  def comp IClb as
    var V: mV {pub: in};
    var ECl: mV {pub: in};
    var GClb: mS_per_uF {init: 2.25e-4};
    var IClb: uA_per_uF {pub: out};
    IClb = GClb*(V-ECl);
  enddef;

  def comp INal as
    var time: ms {pub: in};
    var V: mV {pub: in};
    var ENa: mV {pub: in};
    var GNaL: mS_per_uF {init: 65e-4};
    var mL: dimensionless {init: 0.001356538159};
    var hL: dimensionless {init: 0.26130711759};
    var amL: per_ms;
    var bmL: per_ms;
    var hLss: dimensionless;
    var INal: uA_per_uF {pub: out};
    INal = GNaL*pow(mL, 3{dimensionless})*hL*(V-ENa);
    amL = 0.32{per_ms}*1{per_mV}*(V+47.13{mV})/(1{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    bmL = 0.08{per_ms}*exp(-V/11{mV});
    hLss = 1{dimensionless}/(1{dimensionless}+exp((V+91{mV})/6.1{mV}));
    ode(mL, time) = amL*(1{dimensionless}-mL)-bmL*mL;
    ode(hL, time) = (hLss-hL)/600{ms};
  enddef;

  def comp reversal_potentials as
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var K_o: mM {pub: in};
    var K_i: mM {pub: in};
    var Cl_o: mM {pub: in};
    var Cl_i: mM {pub: in};
    var FonRT: per_mV {pub: in};
    var prnak: dimensionless {init: 0.01833};
    var ENa: mV {pub: out};
    var EK: mV {pub: out};
    var EKs: mV {pub: out};
    var ECl: mV {pub: out};
    ENa = ln(Na_o/Na_i)/FonRT;
    EK = ln(K_o/K_i)/FonRT;
    EKs = ln((K_o+prnak*Na_o)/(K_i+prnak*Na_i))/FonRT;
    ECl = -ln(Cl_o/Cl_i)/FonRT;
  enddef;

  def comp Irel as
    var time: ms {pub: in};
    var tissue: dimensionless {pub: in};
    var Ca_ss: mM {pub: in};
    var Ca_jsr: mM {pub: in};
    var ibarca: uA_per_uF {pub: in};
    var ICaL: uA_per_uF {pub: in};
    var Grel: per_ms;
    var dro_inf: dimensionless;
    var dtau_rel_max: ms {init: 10};
    var dtau_rel: ms;
    var ross: dimensionless;
    var riss: dimensionless;
    var tauri: ms;
    var irelcicr: mM_per_ms {pub: out};
    var CaMK0: dimensionless {init: 0.05};
    var Km: mM {init: 0.0015};
    var KmCaMK: dimensionless {init: 0.15, pub: out};
    var CaMKbound: dimensionless;
    var CaMKactive: dimensionless {pub: out};
    var CaMKtrap: dimensionless {init: 0.021123704774};
    var ro: dimensionless {init: 0};
    var ri: dimensionless {init: 0.862666650318};
    var vg: dimensionless;
    var cafac: dimensionless;
    CaMKbound = CaMK0*(1{dimensionless}-CaMKtrap)/(1{dimensionless}+Km/Ca_ss);
    CaMKactive = CaMKbound+CaMKtrap;
    Grel = 3000{per_ms}*vg;
    vg = sel
      case tissue == 0{dimensionless}:
        1{dimensionless}/(1{dimensionless}+exp((ibarca+13{uA_per_uF})/5{uA_per_uF}));
      otherwise:
        1{dimensionless};
    endsel;
    cafac = 1{dimensionless}/(1{dimensionless}+exp((ICaL+0.05{uA_per_uF})/0.015{uA_per_uF}));
    dro_inf = pow(Ca_jsr, 1.9{dimensionless})/(pow(Ca_jsr, 1.9{dimensionless})+pow(49.28{mM}*Ca_ss/(Ca_ss+0.0028{mM}), 1.9{dimensionless}));
    dtau_rel = dtau_rel_max*CaMKactive/(KmCaMK+CaMKactive);
    ross = dro_inf/(sqr(1{uA_per_uF}/ICaL)+1{dimensionless});
    riss = 1{dimensionless}/(1{dimensionless}+exp((Ca_ss-4e-4{mM}+0.002{mM}*cafac)/2.5e-5{mM}));
    tauri = 3{ms}+dtau_rel+(350{ms}-dtau_rel)/(1{dimensionless}+exp((Ca_ss-0.003{mM}+0.003{mM}*cafac)/2e-4{mM}));
    irelcicr = Grel*ro*ri*(Ca_jsr-Ca_ss);
    ode(ro, time) = (ross-ro)/3{ms};
    ode(ri, time) = (riss-ri)/tauri;
    ode(CaMKtrap, time) = 0.05{per_ms}*CaMKactive*(CaMKactive-CaMKtrap)-6.8e-4{per_ms}*CaMKtrap;
  enddef;

  def comp Iup_Ileak as
    var dKmPLBmax: mM {init: 0.00017};
    var dJupmax: dimensionless {init: 0.75};
    var dKmPLB: mM;
    var dJup: dimensionless;
    var iupmax: mM_per_ms {init: 0.004375};
    var Kmup: mM {init: 0.00092};
    var nsrmax: mM {init: 15};
    var iup: mM_per_ms {pub: out};
    var ileak: mM_per_ms {pub: out};
    var KmCaMK: dimensionless {pub: in};
    var CaMKactive: dimensionless {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_nsr: mM {pub: in};
    dKmPLB = dKmPLBmax*CaMKactive/(KmCaMK+CaMKactive);
    dJup = dJupmax*CaMKactive/(KmCaMK+CaMKactive);
    iup = (dJup+1{dimensionless})*iupmax*Ca_i/(Ca_i+Kmup-dKmPLB);
    ileak = iupmax*Ca_nsr/nsrmax;
  enddef;

  def comp Idiff_Itr as
    var idiff: mM_per_ms {pub: out};
    var itr: mM_per_ms {pub: out};
    var Ca_ss: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_nsr: mM {pub: in};
    var Ca_jsr: mM {pub: in};
    idiff = (Ca_ss-Ca_i)/0.2{ms};
    itr = (Ca_nsr-Ca_jsr)/120{ms};
  enddef;

  def comp Na as
    var time: ms {pub: in};
    var Na_i: mM {init: 12.972433387269, pub: out};
    var naiont: uA_per_uF {pub: in};
    var AF: uF_mole_per_C {pub: in};
    var vmyo: uL {pub: in};
    var CTNaCl: mM_per_ms {pub: out};
    var CTNaClmax: mM_per_ms {init: 9.8443e-6};
    var ENa: mV {pub: in};
    var ECl: mV {pub: in};
    CTNaCl = CTNaClmax*pow(ENa-ECl, 4{dimensionless})/(pow(ENa-ECl, 4{dimensionless})+pow(87.8251{mV}, 4{dimensionless}));
    ode(Na_i, time) = -naiont*AF/vmyo+CTNaCl;
  enddef;

  def comp K as
    var time: ms {pub: in};
    var K_i: mM {init: 135.469546216758, pub: out};
    var kiont: uA_per_uF {pub: in};
    var AF: uF_mole_per_C {pub: in};
    var vmyo: uL {pub: in};
    var CTKCl: mM_per_ms {pub: out};
    var CTKClmax: mM_per_ms {init: 7.0756e-6};
    var EK: mV {pub: in};
    var ECl: mV {pub: in};
    CTKCl = CTKClmax*(EK-ECl)/(EK-ECl+87.8251{mV});
    ode(K_i, time) = -kiont*AF/vmyo+CTKCl;
  enddef;

  def comp Cl as
    var time: ms {pub: in};
    var Cl_i: mM {init: 15.59207157178, pub: out};
    var clont: uA_per_uF {pub: in};
    var AF: uF_mole_per_C {pub: in};
    var vmyo: uL {pub: in};
    var CTNaCl: mM_per_ms {pub: in};
    var CTKCl: mM_per_ms {pub: in};
    ode(Cl_i, time) = clont*AF/vmyo+CTNaCl+CTKCl;
  enddef;

  def comp Ca as
    var time: ms {pub: in};
    var Ca_i: mM {init: 0.00012131666, pub: out};
    var Ca_jsr: mM {init: 1.737580994071, pub: out};
    var Ca_nsr: mM {init: 1.832822335168, pub: out};
    var Ca_ss: mM {init: 0.00012271265, pub: out};
    var kmt: mM {init: 0.5e-3};
    var kmc: mM {init: 2.38e-3};
    var tbar: mM {init: 70e-3};
    var cbar: mM {init: 50e-3};
    var kmcsqn: mM {init: 0.8};
    var csqnbar: mM {init: 10};
    var bcsqn: dimensionless;
    var bmyo: dimensionless;
    var BSRmax: mM {init: 0.047};
    var KmBSR: mM {init: 0.00087};
    var BSLmax: mM {init: 1.124};
    var KmBSL: mM {init: 0.0087};
    var bss: dimensionless;
    var ICab: uA_per_uF {pub: in};
    var ICaL: uA_per_uF {pub: in};
    var IpCa: uA_per_uF {pub: in};
    var INaCa: uA_per_uF {pub: in};
    var vmyo: uL {pub: in};
    var vsr: uL {pub: in};
    var vnsr: uL {pub: in};
    var vjsr: uL {pub: in};
    var vss: uL {pub: in};
    var AF: uF_mole_per_C {pub: in};
    var iup: mM_per_ms {pub: in};
    var ileak: mM_per_ms {pub: in};
    var irelcicr: mM_per_ms {pub: in};
    var idiff: mM_per_ms {pub: in};
    var itr: mM_per_ms {pub: in};
    ode(Ca_i, time) = bmyo*(-(ICab+IpCa-2{dimensionless}*INaCa)*AF/(vmyo*2{dimensionless})+(ileak-iup)*vnsr/vmyo+idiff*vss/vmyo);
    ode(Ca_ss, time) = bss*(-ICaL*AF/(vss*2{dimensionless})+irelcicr*vjsr/vss-idiff);
    ode(Ca_nsr, time) = iup-itr*vjsr/vnsr-ileak;
    ode(Ca_jsr, time) = bcsqn*(itr-irelcicr);
    bcsqn = 1{dimensionless}/(1{dimensionless}+kmcsqn*csqnbar/sqr(Ca_jsr+kmcsqn));
    bmyo = 1{dimensionless}/(1{dimensionless}+cbar*kmc/sqr(Ca_i+kmc)+kmt*tbar/sqr(Ca_i+kmt));
    bss = 1{dimensionless}/(1{dimensionless}+BSRmax*KmBSR/sqr(KmBSR+Ca_ss)+BSLmax*KmBSL/sqr(KmBSL+Ca_ss));
  enddef;

  def comp intracellular_currents as
  enddef;

  def comp transmembrane_currents as
  enddef;

  def comp Ions_n_reversal_potentials as
  enddef;

  def group as containment for
    comp cell incl
      comp transmembrane_currents incl
        comp INa;
        comp ICaL;
        comp IK1;
        comp IKr;
        comp IKs;
        comp Ito;
        comp INaK;
        comp INaCa;
        comp IKp;
        comp IpCa;
        comp ICab;
        comp Ito2;
        comp IClb;
        comp INal;
      endcomp;
      comp intracellular_currents incl
        comp Irel;
        comp Iup_Ileak;
        comp Idiff_Itr;
      endcomp;
      comp Ions_n_reversal_potentials incl
        comp Ca;
        comp Na;
        comp K;
        comp Cl;
        comp reversal_potentials;
      endcomp;
    endcomp;
  enddef;
  def map between cell and Environment for
    vars time and time;
    vars F and F;
  enddef;
  def map between reversal_potentials and Environment for
    vars K_o and K_o;
    vars Na_o and Na_o;
    vars Cl_o and Cl_o;
    vars FonRT and FonRT;
  enddef;
  def map between INa and Environment for
    vars time and time;
    vars tissue and tissue;
  enddef;
  def map between ICaL and Environment for
    vars time and time;
    vars Ca_o and Ca_o;
    vars F and F;
    vars FonRT and FonRT;
    vars tissue and tissue;
  enddef;
  def map between IKr and Environment for
    vars time and time;
    vars K_o and K_o;
  enddef;
  def map between IKs and Environment for
    vars time and time;
  enddef;
  def map between IK1 and Environment for
    vars K_o and K_o;
  enddef;
  def map between Ito and Environment for
    vars time and time;
  enddef;
  def map between INaK and Environment for
    vars K_o and K_o;
    vars Na_o and Na_o;
    vars FonRT and FonRT;
  enddef;
  def map between INaCa and Environment for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
    vars FonRT and FonRT;
  enddef;
  def map between ICab and Environment for
    vars F and F;
    vars FonRT and FonRT;
    vars Ca_o and Ca_o;
  enddef;
  def map between Ito2 and Environment for
    vars time and time;
    vars F and F;
    vars FonRT and FonRT;
    vars Cl_o and Cl_o;
  enddef;
  def map between INal and Environment for
    vars time and time;
  enddef;
  def map between Irel and Environment for
    vars time and time;
    vars tissue and tissue;
  enddef;
  def map between Ca and Environment for
    vars time and time;
  enddef;
  def map between Na and Environment for
    vars time and time;
  enddef;
  def map between K and Environment for
    vars time and time;
  enddef;
  def map between Cl and Environment for
    vars time and time;
  enddef;
  def map between cell and INa for
    vars V and V;
    vars INa and INa;
  enddef;
  def map between cell and ICaL for
    vars V and V;
    vars ICaL and ICaL;
  enddef;
  def map between cell and IpCa for
    vars IpCa and IpCa;
  enddef;
  def map between cell and ICab for
    vars V and V;
    vars ICab and ICab;
  enddef;
  def map between cell and IKr for
    vars V and V;
    vars IKr and IKr;
  enddef;
  def map between cell and IKs for
    vars V and V;
    vars IKs and IKs;
  enddef;
  def map between cell and IKp for
    vars V and V;
    vars IKp and IKp;
  enddef;
  def map between cell and Ito for
    vars V and V;
    vars Ito and Ito;
  enddef;
  def map between cell and IK1 for
    vars V and V;
    vars IK1 and IK1;
  enddef;
  def map between cell and INaK for
    vars V and V;
    vars INaK and INaK;
  enddef;
  def map between cell and INaCa for
    vars V and V;
    vars INaCa and INaCa;
  enddef;
  def map between cell and Ito2 for
    vars V and V;
    vars Ito2 and Ito2;
  enddef;
  def map between cell and IClb for
    vars V and V;
    vars IClb and IClb;
  enddef;
  def map between cell and INal for
    vars V and V;
    vars INal and INal;
  enddef;
  def map between cell and Na for
    vars naiont and naiont;
    vars AF and AF;
    vars vmyo and vmyo;
  enddef;
  def map between cell and K for
    vars kiont and kiont;
    vars AF and AF;
    vars vmyo and vmyo;
  enddef;
  def map between cell and Cl for
    vars clont and clont;
    vars AF and AF;
    vars vmyo and vmyo;
  enddef;
  def map between cell and Ca for
    vars AF and AF;
    vars vmyo and vmyo;
    vars vss and vss;
    vars vsr and vsr;
    vars vjsr and vjsr;
    vars vnsr and vnsr;
  enddef;
  def map between reversal_potentials and IK1 for
    vars EK and EK;
  enddef;
  def map between reversal_potentials and IKr for
    vars EK and EK;
  enddef;
  def map between reversal_potentials and Ito for
    vars EK and EK;
  enddef;
  def map between reversal_potentials and IKp for
    vars EK and EK;
  enddef;
  def map between reversal_potentials and IKs for
    vars EKs and EKs;
  enddef;
  def map between reversal_potentials and INa for
    vars ENa and ENa;
  enddef;
  def map between reversal_potentials and IClb for
    vars ECl and ECl;
  enddef;
  def map between reversal_potentials and INal for
    vars ENa and ENa;
  enddef;
  def map between reversal_potentials and Na for
    vars ENa and ENa;
    vars ECl and ECl;
    vars Na_i and Na_i;
  enddef;
  def map between reversal_potentials and K for
    vars EK and EK;
    vars ECl and ECl;
    vars K_i and K_i;
  enddef;
  def map between reversal_potentials and Cl for
    vars Cl_i and Cl_i;
  enddef;
  def map between INaK and Na for
    vars Na_i and Na_i;
  enddef;
  def map between INaCa and Na for
    vars Na_i and Na_i;
  enddef;
  def map between INaCa and Ca for
    vars INaCa and INaCa;
    vars Ca_i and Ca_i;
  enddef;
  def map between IpCa and Ca for
    vars IpCa and IpCa;
    vars Ca_i and Ca_i;
  enddef;
  def map between ICab and Ca for
    vars ICab and ICab;
    vars Ca_i and Ca_i;
  enddef;
  def map between ICaL and Ca for
    vars Ca_ss and Ca_ss;
    vars ICaL and ICaL;
  enddef;
  def map between IKs and Ca for
    vars Ca_i and Ca_i;
  enddef;
  def map between Ito2 and Cl for
    vars Cl_i and Cl_i;
  enddef;
  def map between Ito2 and Ca for
    vars Ca_ss and Ca_ss;
  enddef;
  def map between Ca and Irel for
    vars irelcicr and irelcicr;
    vars Ca_ss and Ca_ss;
    vars Ca_jsr and Ca_jsr;
  enddef;
  def map between Ca and Iup_Ileak for
    vars iup and iup;
    vars ileak and ileak;
    vars Ca_i and Ca_i;
    vars Ca_nsr and Ca_nsr;
  enddef;
  def map between Ca and Idiff_Itr for
    vars idiff and idiff;
    vars itr and itr;
    vars Ca_i and Ca_i;
    vars Ca_ss and Ca_ss;
    vars Ca_jsr and Ca_jsr;
    vars Ca_nsr and Ca_nsr;
  enddef;
  def map between ICaL and Irel for
    vars CaMKactive and CaMKactive;
    vars ibarca and ibarca;
    vars ICaL and ICaL;
  enddef;
  def map between Irel and Iup_Ileak for
    vars KmCaMK and KmCaMK;
    vars CaMKactive and CaMKactive;
  enddef;
  def map between K and Cl for
    vars CTKCl and CTKCl;
  enddef;
  def map between Na and Cl for
    vars CTNaCl and CTNaCl;
  enddef;
enddef;
// rdf:#9a7bda00-02a0-41c7-8edd-dc14f0bf845f
// N: Given Penny; Family Noble
// rdf:#3267a86b-b710-462e-8e76-f471cf1f2a5a
// W3CDTF: 2008-06-18T01:17:05+12:00
// rdf:#8525c1aa-8db8-4c39-a052-fda7b17e0405
// FN: Penny Noble
// rdf:#7be80c29-2a4b-4d8b-896d-8b88746a2d86
// value: This CellML version of the model has been checked in COR. The units are consistent and the model runs to recreate the published results. The parameter 'tissue' has been added to switch between the original (default value 0) and 'tissue' (any other value, for example 1) models. In the paper described here, Thomas Hund and Yoram Rudy present a detailed, and physiologically realistic, mathematical model of a canine ventricular cell. Model simulations are able to recreate the rate-dependent phenomena associated with ion-channel kinetics, action potential properties, and calcium ion handling. The model is based on an epicardial myocyte because these cells contain the largest transient outward potassium current (when compared with endocardial or midmyocardial myocytes). The calcium/calmodulin-dependent protein kinase (CaMKII) regulatory pathway was embedded within the electrophysiological model, incorporating calcium-release formulation, calcium subspace, and dynamic chloride handling. Results from the model simulations revealed CaMKII is an important determinant of the rate dependence of the calcium transient, but not of the action potential duration, which depends instead on the ion-channel kinetics.
// rdf:#1bbcdd52-ad31-428c-a0f7-575d5f32aee7
// value: This version of the model was created by literally translating to CellML from the original source code and then adding compartments and curating for unit consistency.
