//  FILE : Lovell_model_2004.xml
//
// CREATED : 24th April 2004
//
// LAST MODIFIED : 27th April 2005
//
// AUTHOR : Catherine Lloyd
//          Bioengineering Instute
//          The University of Auckland
//
// MODEL STATUS : This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.
//
// DESCRIPTION : This file contains a CellML description of Lovell et al.'s 2004 mathematical model of cardiac pacemaker myocytes.
//
// CHANGES:
//    27/04/2005 - PJV - Made MathML id's unique. Removed undefined
//                       initial values.
// publisher: The University of Auckland, Bioengineering Institute
// created: W3CDTF 2003-10-07T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: Lovell et al.'s 2004 mathematical model of cardiac pacemaker myocytes.
// bio_entity: Sinoatrial Node
// comment: FN Catherine Lloyd; This is the CellML description of Lovell et al.'s 2004 mathematical model of cardiac pacemaker myocytes.
// reference: subject_type keyword; pacemaker; Sinoatrial Node; cardiac myocyte; electrophysiology; Pacemaker; cardiac; sinoatrial node
// reference: Given Nigel; Family Lovell; Other H; Given Shaun; Family Cloherty; Other L; Given Branko; Family Celler; Other G; Given Socrates; Family Dokos; title A gradient model of cardiac pacemaker myocytes; volume 85; title Progress in Biophysics and Molecular Biology; W3CDTF 2004
def model lovell_cloherty_celler_dokos_2004_version01 as
  // A Gradient Model Of Cardiac Pacemaker Myocytes
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This model is currently non-functional.
  //
  // Model Structure
  //
  // Electrical activity of the healthy mammalian heart is initiated by an area of specialised pacemaker cells in the wall of the heart, known as the sinoatrial node (SAN). These cells are spontaneously active, demonstrating a slow depolarisation to threshold (pacemaker potential) rather than a stable resting potential. Despite heterogeneity amongst the cells of the SAN, the cells are able to synchronise their firing rate and this in turn stimulates the contraction of the atrial myocardium. Synchronisation is achieved by electronic coupling between cells via gap junctions.
  //
  // To date, two potential theories have been put forward to explain the observed spatial heterogeneity in the action potential characteristics within the SAN:
  //
  // 1) The gradient model suggests that the heterogeneity arises intrinsically from a spatial gradient in underlying cellular electrophysiological properties; and
  //
  // 2) The mosaic model, which suggests that atrial myocytes are peppered throughout the SAN region, increasing in density towards the periphery. Action potential heterogeneity then arises due to the electronic coupling between atrial and pacemaker myocytes, and the differences between the relative density of the two cell types with the SAN.
  //
  // In order to further investigate the source of the action potential heterogeneity in the SAN, a mathematical model has been devloped by Lovell et al. (see the figure below). Several mathematical models of the SAN activity have been previously published, including:
  //
  // Demir et al. Sinoatrial Node Model, 1994;
  //
  // Modelling the Ion Currents Underlying Sinoatrial Node Pacemaker Activity, Dokos et al., 1996;
  //
  // A Model of Sinoatrial Node Vagal Control, Dokos et al., 1996;
  //
  // Demir et al. Sinoatrial Node Model, 1999;
  //
  // Zhang et al. Sinoatrial Node Model, 2000;
  //
  // Boyett et al. Sinoatrial Node Model, 2001;
  //
  // and
  //
  // Kurata et al. Improved Mathematical Model for the Primary Pacemaker Cell, 2002.
  //
  // Although these models were able to recreate the generic action potential waveforms from the SAN, none were able to represent action potential waveforms from any specific SAN cell. This limits the application of such models to analyse the factors underlying action potential heterogeneity in coupled systems of pacemaker cells, as well as elucidating specific ionic mechanisms underlying action potential heterogeneity in the SAN.
  //
  // To meet these needs, Lovell et al. have devloped a generic single cell ionic model of rabbit SAN cells, which is based on Markovian state kinetics (all previously published SAN models are based on a Hodgkin-Huxley mechanism). Parameters are fitted to this model using a custom least squares optimisation approach. They then propose a gradient model of the SAN by employing the same optimisation approach to fit a smooth transition in ionic model parameters to achieve a desired variation in AP characteristics.
  //
  // The model has been described here in CellML. It should be noted that the initial parameters entered into this model are those for the central SAN value. Peripheral SAN values and the interpolation parameters are also provided in the original publication.
  //
  // The complete original paper reference is cited below:
  //
  // Progress in Biophysics and Molecular Biology (http://linkinghub.elsevier.com/retrieve/pii/S0079610703001123), 85, 301-323. (Full text (HTML) (http://www.sciencedirect.com/science/journal/00796107) and PDF versions of the article are available to subscribers on the Progress in Biophysics and Molecular Biology website.) PubMed ID: 15142749 (http://www.ncbi.nlm.nih.gov/pubmed/15142749)
  //
  // cell diagram
  //
  // A schematic diagram describing the ionic components of the SA node mathematical model.
  def unit first_order_rate_constant as
    unit second {expo: -1};
  enddef;
  def unit third_order_rate_constant as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;
  def unit nanoF as
    unit farad {pref: nano};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoA_per_millimolar as
    unit picoA;
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb {expo: -1};
    unit mole {pref: milli};
  enddef;
  def unit picol as
    unit litre {pref: pico};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp membrane as
    var Em: millivolt {pub: out, init: -6.395E1};
    var Cm: nanoF {init: 3.2E-2};
    var time: second {pub: in};
    var i_f: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_bNa: picoA {pub: in};
    var i_Na: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_to: picoA {pub: in};
    var i_CaL: picoA {pub: in};
    var i_CaT: picoA {pub: in};
    var i_bK: picoA {pub: in};
    var i_bCl: picoA {pub: in};
    ode(Em, time) = -(i_f+i_Kr+i_Ks+i_bNa+i_Na+i_NaK+i_NaCa+i_to+i_CaL+i_CaT+i_bK+i_bCl)/Cm;
  enddef;

  def comp reversal_potentials as
    var E_Na: millivolt {pub: out};
    var E_Cl: millivolt {pub: out};
    var E_Ca_rev: millivolt {pub: out, init: 4.972E1};
    var E_K: millivolt {pub: out};
    var R: joule_per_mole_kelvin {pub: out, init: 8.3144};
    var T: kelvin {pub: out, init: 310.15};
    var F: coulomb_per_mole {pub: out, init: 96485};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Cli: millimolar {pub: in};
    var Clo: millimolar {pub: in};
    E_Na = R*T/F*ln(Nao/Nai);
    E_Ca_rev = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
    E_Cl = R*T/(-1.0{dimensionless}*F)*ln(Clo/Cli);
    E_K = R*T/F*ln(Ko/Ki);
  enddef;

  def comp L_type_calcium_current as
    var i_CaL: picoA {pub: out};
    var g_CaL: nanoS {init: 1.604E2};
    var A_CaL: dimensionless {init: 4.564E-4};
    var I1: dimensionless {init: 9.601E-1};
    var I2: dimensionless {init: 5.261E-3};
    var I3: dimensionless;
    var alpha1: first_order_rate_constant;
    var alpha2: first_order_rate_constant;
    var alpha3: third_order_rate_constant {init: 1.395E5};
    var alpha4: first_order_rate_constant {init: 4.945};
    var beta1: first_order_rate_constant;
    var beta2: first_order_rate_constant;
    var beta3: first_order_rate_constant {init: 7.648};
    var beta4: third_order_rate_constant {init: 4.051E6};
    var alpha1_0: first_order_rate_constant {init: 1.115E2};
    var alpha1_infinity: first_order_rate_constant {init: 2.451E3};
    var alpha1_E50: millivolt {init: -3.116E1};
    var alpha1_Eslope: millivolt {init: 8.815};
    var alpha2_0: first_order_rate_constant {init: 9.622E1};
    var alpha2_infinity: first_order_rate_constant {init: 1.409E1};
    var alpha2_E50: millivolt {init: 3.116};
    var alpha2_Eslope: millivolt {init: 5.936};
    var beta1_0: first_order_rate_constant {init: 1.283E4};
    var beta1_infinity: first_order_rate_constant {init: 4.701E3};
    var beta1_E50: millivolt {init: -2.448E1};
    var beta1_Eslope: millivolt {init: 7.300};
    var beta2_0: first_order_rate_constant {init: 1.950E-1};
    var beta2_infinity: first_order_rate_constant {init: 5.984E-2};
    var beta2_E50: millivolt {init: 5.934};
    var beta2_Eslope: millivolt {init: 1.395E5};
    var E_Ca_rev: millivolt {pub: in};
    var time: second {pub: in};
    var Em: millivolt {pub: in};
    var Cai: millimolar {pub: in};
    i_CaL = g_CaL*A_CaL*(Em-E_Ca_rev);
    ode(A_CaL, time) = alpha1*I3+beta1*I1-(beta1+alpha2)*A_CaL;
    ode(I1, time) = alpha2*A_CaL+beta3*I2-(beta2+alpha3+sqr(Cai))*I1;
    ode(I2, time) = alpha3*sqr(Cai)*I1+beta4*sqr(Cai)*I3-(beta3+alpha4)*I2;
    ode(I3, time) = beta1*A_CaL+alpha4*I2-(alpha1+beta4*sqr(Cai))*I3;
    alpha1 = alpha1_infinity+(alpha1_0-alpha1_infinity)/(1.0{dimensionless}+exp((Em-alpha1_E50)/alpha1_Eslope));
    beta1 = beta1_infinity+(beta1_0-beta1_infinity)/(1.0{dimensionless}+exp((Em-beta1_E50)/beta1_Eslope));
    alpha2 = alpha2_infinity+(alpha2_0-alpha2_infinity)/(1.0{dimensionless}+exp((Em-alpha2_E50)/alpha2_Eslope));
    beta2 = beta2_infinity+(beta2_0-beta2_infinity)/(1.0{dimensionless}+exp((Em-beta2_E50)/beta2_Eslope));
  enddef;

  def comp T_type_calcium_current as
    var i_CaT: picoA {pub: out};
    var g_CaT: nanoS {init: 6.816E2};
    var A_CaT: dimensionless {init: 1.562E-5};
    var I1: dimensionless {init: 9.985E-1};
    var I2: dimensionless;
    var alpha1: first_order_rate_constant;
    var alpha2: first_order_rate_constant;
    var alpha3: first_order_rate_constant;
    var beta1: first_order_rate_constant;
    var beta3: first_order_rate_constant;
    var alpha1_0: first_order_rate_constant {init: 0.0};
    var alpha1_infinity: first_order_rate_constant {init: 1.203E3};
    var alpha1_E50: millivolt {init: -3.442E1};
    var alpha1_Eslope: millivolt {init: 6.143};
    var alpha2_0: first_order_rate_constant {init: 2.458E2};
    var alpha2_infinity: first_order_rate_constant {init: 1.304E3};
    var alpha2_E50: millivolt {init: -1.978E1};
    var alpha2_Eslope: millivolt {init: 1.260E1};
    var alpha3_0: first_order_rate_constant {init: 1.003E-1};
    var alpha3_infinity: first_order_rate_constant {init: 1.157E-2};
    var alpha3_E50: millivolt {init: 6.079};
    var alpha3_Eslope: millivolt {init: 4.938E-1};
    var beta1_0: first_order_rate_constant {init: 8.075E2};
    var beta1_infinity: first_order_rate_constant {init: 9.663};
    var beta1_E50: millivolt {init: -3.025E1};
    var beta1_Eslope: millivolt {init: 2.580E1};
    var beta3_0: first_order_rate_constant {init: 1.914};
    var beta3_infinity: first_order_rate_constant {init: 4.490E2};
    var beta3_E50: millivolt {init: -3.948E1};
    var beta3_Eslope: millivolt {init: 1.295E1};
    var E_Ca_rev: millivolt {pub: in};
    var time: second {pub: in};
    var Em: millivolt {pub: in};
    i_CaT = g_CaT*A_CaT*(Em-E_Ca_rev);
    ode(A_CaT, time) = alpha1*I2-(beta1+alpha2)*A_CaT;
    ode(I1, time) = alpha2*A_CaT+beta3*I2-alpha3*I1;
    ode(I2, time) = alpha3*I1+beta1*A_CaT-(beta3+alpha1)*I2;
    alpha1 = alpha1_infinity+(alpha1_0-alpha1_infinity)/(1.0{dimensionless}+exp((Em-alpha1_E50)/alpha1_Eslope));
    beta1 = beta1_infinity+(beta1_0-beta1_infinity)/(1.0{dimensionless}+exp((Em-beta1_E50)/beta1_Eslope));
    alpha2 = alpha2_infinity+(alpha2_0-alpha2_infinity)/(1.0{dimensionless}+exp((Em-alpha2_E50)/alpha2_Eslope));
    alpha3 = alpha3_infinity+(alpha3_0-alpha3_infinity)/(1.0{dimensionless}+exp((Em-alpha3_E50)/alpha3_Eslope));
    beta3 = beta3_infinity+(beta3_0-beta3_infinity)/(1.0{dimensionless}+exp((Em-beta3_E50)/beta3_Eslope));
  enddef;

  def comp rapid_delayed_rectifying_potassium_current as
    var i_Kr: picoA {pub: out};
    var i_Kr_Na: picoA {pub: out};
    var i_Kr_K: picoA {pub: out};
    var g_Kr: nanoS {init: 4.714};
    var PKNa_r: picoA_per_millimolar {init: 3.042E-2};
    var A_Kr: dimensionless {init: 1.209E-1};
    var I1: dimensionless {init: 1.991E-3};
    var I2: dimensionless {init: 5.617E-2};
    var I3: dimensionless;
    var alpha1: first_order_rate_constant;
    var alpha2: first_order_rate_constant;
    var alpha3: first_order_rate_constant;
    var alpha4: first_order_rate_constant;
    var beta1: first_order_rate_constant;
    var beta4: first_order_rate_constant;
    var alpha1_0: first_order_rate_constant {init: 2.924E-1};
    var alpha1_infinity: first_order_rate_constant {init: 1.796};
    var alpha1_E50: millivolt {init: -2.821};
    var alpha1_Eslope: millivolt {init: 1.591E1};
    var alpha2_0: first_order_rate_constant {init: 8.011E-4};
    var alpha2_infinity: first_order_rate_constant {init: 2.815E1};
    var alpha2_E50: millivolt {init: 2.607E1};
    var alpha2_Eslope: millivolt {init: 4.849};
    var alpha3_0: first_order_rate_constant {init: 0.0};
    var alpha3_infinity: first_order_rate_constant {init: 1.382E1};
    var alpha3_E50: millivolt {init: -1.706};
    var alpha3_Eslope: millivolt {init: 8.661};
    var alpha4_0: first_order_rate_constant {init: 8.526E1};
    var alpha4_infinity: first_order_rate_constant {init: 5.840};
    var alpha4_E50: millivolt {init: 1.663E1};
    var alpha4_Eslope: millivolt {init: 1.906E1};
    var beta1_0: first_order_rate_constant {init: 1.161E-1};
    var beta1_infinity: first_order_rate_constant {init: 5.201E1};
    var beta1_E50: millivolt {init: -6.477};
    var beta1_Eslope: millivolt {init: 1.149E1};
    var beta4_0: first_order_rate_constant {init: 5.728};
    var beta4_infinity: first_order_rate_constant {init: 5.372E2};
    var beta4_E50: millivolt {init: 4.594E1};
    var beta4_Eslope: millivolt {init: 4.646};
    var E_Na: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var time: second {pub: in};
    var Em: millivolt {pub: in};
    i_Kr = i_Kr_Na+i_Kr_K;
    i_Kr_Na = g_Kr*A_Kr*PKNa_r*(Em-E_Na);
    i_Kr_K = g_Kr*A_Kr*(Em-E_K);
    ode(A_Kr, time) = alpha1*I3-(beta1+alpha2)*A_Kr;
    ode(I1, time) = alpha2*A_Kr-alpha3*I1;
    ode(I2, time) = alpha3*I1+beta4*I3-alpha4*I2;
    ode(I3, time) = beta1*A_Kr+alpha4*I2-(alpha1+beta4)*I3;
    alpha1 = alpha1_infinity+(alpha1_0-alpha1_infinity)/(1.0{dimensionless}+exp((Em-alpha1_E50)/alpha1_Eslope));
    beta1 = beta1_infinity+(beta1_0-beta1_infinity)/(1.0{dimensionless}+exp((Em-beta1_E50)/beta1_Eslope));
    alpha2 = alpha2_infinity+(alpha2_0-alpha2_infinity)/(1.0{dimensionless}+exp((Em-alpha2_E50)/alpha2_Eslope));
    alpha3 = alpha3_infinity+(alpha3_0-alpha3_infinity)/(1.0{dimensionless}+exp((Em-alpha3_E50)/alpha3_Eslope));
    alpha4 = alpha4_infinity+(alpha4_0-alpha4_infinity)/(1.0{dimensionless}+exp((Em-alpha4_E50)/alpha4_Eslope));
    beta4 = beta4_infinity+(beta4_0-beta4_infinity)/(1.0{dimensionless}+exp((Em-beta4_E50)/beta4_Eslope));
  enddef;

  def comp slow_delayed_rectifying_potassium_current as
    var i_Ks: picoA {pub: out};
    var i_Ks_Na: picoA {pub: out};
    var i_Ks_K: picoA {pub: out};
    var g_Ks: nanoS {init: 1.328E1};
    var PKNa_s: picoA_per_millimolar {init: 3.053E-2};
    var A_Ks: dimensionless {init: 5.049E-3};
    var I1: dimensionless {init: 9.921E-1};
    var I2: dimensionless;
    var alpha1: first_order_rate_constant;
    var alpha2: first_order_rate_constant;
    var alpha3: first_order_rate_constant;
    var beta1: first_order_rate_constant;
    var beta3: first_order_rate_constant;
    var alpha1_0: first_order_rate_constant {init: 1.455};
    var alpha1_infinity: first_order_rate_constant {init: 1.590E1};
    var alpha1_E50: millivolt {init: 3.403E1};
    var alpha1_Eslope: millivolt {init: 9.464};
    var alpha2_0: first_order_rate_constant {init: 7.619E-1};
    var alpha2_infinity: first_order_rate_constant {init: 7.207E-2};
    var alpha2_E50: millivolt {init: 1.021E1};
    var alpha2_Eslope: millivolt {init: 2.584};
    var alpha3_0: first_order_rate_constant {init: 0.0};
    var alpha3_infinity: first_order_rate_constant {init: 1.690E1};
    var alpha3_E50: millivolt {init: 4.216E1};
    var alpha3_Eslope: millivolt {init: 8.481};
    var beta1_0: first_order_rate_constant {init: 3.628E-3};
    var beta1_infinity: first_order_rate_constant {init: 4.191};
    var beta1_E50: millivolt {init: 2.231E1};
    var beta1_Eslope: millivolt {init: 1.063E1};
    var beta3_0: first_order_rate_constant {init: 1.772};
    var beta3_infinity: first_order_rate_constant {init: 4.141E-1};
    var beta3_E50: millivolt {init: 9.822};
    var beta3_Eslope: millivolt {init: 1.280E1};
    var E_Na: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var time: second {pub: in};
    var Em: millivolt {pub: in};
    i_Ks = i_Ks_Na+i_Ks_K;
    i_Ks_Na = g_Ks*A_Ks*PKNa_s*(Em-E_Na);
    i_Ks_K = g_Ks*A_Ks*(Em-E_K);
    ode(A_Ks, time) = alpha1*I2-(beta1+alpha2)*A_Ks;
    ode(I1, time) = alpha2*A_Ks+beta3*I2-alpha3*I1;
    ode(I2, time) = alpha3*I1+beta1*A_Ks-(alpha1+beta3)*I2;
    alpha1 = alpha1_infinity+(alpha1_0-alpha1_infinity)/(1.0{dimensionless}+exp((Em-alpha1_E50)/alpha1_Eslope));
    beta1 = beta1_infinity+(beta1_0-beta1_infinity)/(1.0{dimensionless}+exp((Em-beta1_E50)/beta1_Eslope));
    alpha2 = alpha2_infinity+(alpha2_0-alpha2_infinity)/(1.0{dimensionless}+exp((Em-alpha2_E50)/alpha2_Eslope));
    alpha3 = alpha3_infinity+(alpha3_0-alpha3_infinity)/(1.0{dimensionless}+exp((Em-alpha3_E50)/alpha3_Eslope));
    beta3 = beta3_infinity+(beta3_0-beta3_infinity)/(1.0{dimensionless}+exp((Em-beta3_E50)/beta3_Eslope));
  enddef;

  def comp TTX_sensitive_sodium_current as
    var i_Na: picoA {pub: out};
    var g_Na: nanoS {pub: out, init: 2.889};
    var A_Na: dimensionless {init: 5.586E-4};
    var I1: dimensionless {init: 3.750E-1};
    var I2: dimensionless {init: 1.039E-1};
    var I3: dimensionless;
    var alpha1: first_order_rate_constant;
    var alpha2: first_order_rate_constant;
    var alpha3: first_order_rate_constant;
    var alpha4: first_order_rate_constant;
    var beta1: first_order_rate_constant;
    var beta4: first_order_rate_constant;
    var alpha1_0: first_order_rate_constant {init: 1.022E-31};
    var alpha1_infinity: first_order_rate_constant {init: 4.355E5};
    var alpha1_E50: millivolt {init: -3.808E1};
    var alpha1_Eslope: millivolt {init: 4.402};
    var alpha2_0: first_order_rate_constant {init: 2.950E1};
    var alpha2_infinity: first_order_rate_constant {init: 1.710E2};
    var alpha2_E50: millivolt {init: -1.841E1};
    var alpha2_Eslope: millivolt {init: 1.661E1};
    var alpha3_0: first_order_rate_constant {init: 0.0};
    var alpha3_infinity: first_order_rate_constant {init: 2.031};
    var alpha3_E50: millivolt {init: -3.004E1};
    var alpha3_Eslope: millivolt {init: 1.275E-1};
    var alpha4_0: first_order_rate_constant {init: 6.000E1};
    var alpha4_infinity: first_order_rate_constant {init: 0.0};
    var alpha4_E50: millivolt {init: -5.556E1};
    var alpha4_Eslope: millivolt {init: 4.849};
    var beta1_0: first_order_rate_constant {init: 1.133E6};
    var beta1_infinity: first_order_rate_constant {init: 4.104E5};
    var beta1_E50: millivolt {init: -2.239};
    var beta1_Eslope: millivolt {init: 1.651};
    var beta4_0: first_order_rate_constant {init: 1.831E-4};
    var beta4_infinity: first_order_rate_constant {init: 1.904E3};
    var beta4_E50: millivolt {init: 1.821E1};
    var beta4_Eslope: millivolt {init: 1.466E1};
    var E_Na: millivolt {pub: in};
    var time: second {pub: in};
    var Em: millivolt {pub: in};
    i_Na = g_Na*A_Na*(Em-E_Na);
    ode(A_Na, time) = alpha1*I3-(beta1+alpha2)*A_Na;
    ode(I1, time) = alpha2*A_Na-alpha3*I1;
    ode(I2, time) = alpha3*I1+beta4*I3-alpha4*I2;
    ode(I3, time) = beta1*A_Na+alpha4*I2-(alpha1+beta4)*I3;
    alpha1 = alpha1_infinity+(alpha1_0-alpha1_infinity)/(1.0{dimensionless}+exp((Em-alpha1_E50)/alpha1_Eslope));
    beta1 = beta1_infinity+(beta1_0-beta1_infinity)/(1.0{dimensionless}+exp((Em-beta1_E50)/beta1_Eslope));
    alpha2 = alpha2_infinity+(alpha2_0-alpha2_infinity)/(1.0{dimensionless}+exp((Em-alpha2_E50)/alpha2_Eslope));
    alpha3 = alpha3_infinity+(alpha3_0-alpha3_infinity)/(1.0{dimensionless}+exp((Em-alpha3_E50)/alpha3_Eslope));
    alpha4 = alpha4_infinity+(alpha4_0-alpha4_infinity)/(1.0{dimensionless}+exp((Em-alpha4_E50)/alpha4_Eslope));
    beta4 = beta4_infinity+(beta4_0-beta4_infinity)/(1.0{dimensionless}+exp((Em-beta4_E50)/beta4_Eslope));
  enddef;

  def comp sodium_calcium_exchange_current as
    var i_NaCa: picoA {pub: out};
    var kNaCa: picoA {init: 2.249E3};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var k41: dimensionless;
    var k34: dimensionless;
    var k23: dimensionless;
    var k21: dimensionless;
    var k32: dimensionless;
    var k43: dimensionless;
    var k12: dimensionless;
    var k14: dimensionless;
    var Qci: dimensionless {init: 1.421E-1};
    var Qn: dimensionless {init: 2.650E-1};
    var Qco: dimensionless {init: 0.0};
    var K3ni: millimolar {init: 2.490E1};
    var Kci: millimolar {init: 6.510E-3};
    var K1ni: millimolar {init: 3.938E2};
    var K2ni: millimolar {init: 2.286};
    var Kcni: millimolar {init: 2.568E1};
    var K3no: millimolar {init: 6.325};
    var K1no: millimolar {init: 2.200E3};
    var K2no: millimolar {init: 7.639E2};
    var Kco: millimolar {init: 3.299};
    var D1: dimensionless;
    var D2: dimensionless;
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Em: millivolt {pub: in};
    i_NaCa = kNaCa*((x2*k21-x1*k12)/(x1+x2+x3+x4));
    x1 = k41*k34*(k23+k21)+k21*k32*(k43+k41);
    x2 = k32*k43*(k14+k12)+k41*k12*(k34+k32);
    x3 = k14*k43*(k23+k21)+k12*k23*(k43+k41);
    x4 = k23*k34*(k14+k12)+k14*k21*(k34+k32);
    k43 = Nai/(K3ni+Nai);
    k12 = Cai*exp(-(Em*Qci*F/(R*T)))/(Kci*D1);
    k14 = sqr(Nai)*(1.0{dimensionless}+Nai/K3ni)*exp(Qn*Em*F/(2.0{dimensionless}*R*T))/(K1ni*K2ni*D1);
    k41 = exp(-(Em*Qn*F/(2.0{dimensionless}*R*T)));
    D1 = 1.0{dimensionless}+Cai/Kci*(1.0{dimensionless}+exp(-(Em*Qci*F/(R*T))))*(Cai*Nai/(Kci*Kcni))+Nai/K1ni*(1.0{dimensionless}+Nai/K2ni*(1.0{dimensionless}+Nai/K3ni));
    k34 = Nao/(K3no+Nao);
    k21 = Cao/Kco*exp(Qco*Em*F/(R*T))/D2;
    k23 = sqr(Nao)*(1.0{dimensionless}+Nao/K3no)*exp(-(Qn*Em*F/(2.0{dimensionless}*R*T)))/(K1no*K2no*D2);
    k32 = exp(Qn*Em*F/(2.0{dimensionless}*R*T));
    D2 = 1.0{dimensionless}+Cao/Kco*(1.0{dimensionless}+exp(Qco*Em*F/(R*T)))+Nao/K1no*(1.0{dimensionless}+Nao/K2no)*(1.0{dimensionless}+Nao/K3no);
  enddef;

  def comp hyperpolarisation_activated_current as
    var i_f: picoA {pub: out};
    var i_fNa: picoA {pub: out};
    var i_fK: picoA {pub: out};
    var P_f_K: dimensionless {init: 1.162};
    var g_f_Na: nanoS {init: 5.031E2};
    var g_f_K: nanoS;
    var A_f: dimensionless {init: 3.716E-4};
    var Km_f: millimolar {init: 1.030E1};
    var I1: dimensionless {init: 9.972E-1};
    var I2: dimensionless;
    var alpha1: first_order_rate_constant;
    var alpha2: first_order_rate_constant;
    var alpha3: first_order_rate_constant;
    var beta1: first_order_rate_constant;
    var beta3: first_order_rate_constant;
    var alpha1_0: first_order_rate_constant {init: 1.244};
    var alpha1_infinity: first_order_rate_constant {init: 2.157};
    var alpha1_E50: millivolt {init: -4.973E1};
    var alpha1_Eslope: millivolt {init: 9.458};
    var alpha2_0: first_order_rate_constant {init: 0.0};
    var alpha2_infinity: first_order_rate_constant {init: 6.951};
    var alpha2_E50: millivolt {init: -6.658E1};
    var alpha2_Eslope: millivolt {init: 1.013E1};
    var alpha3_0: first_order_rate_constant {init: 5.826};
    var alpha3_infinity: first_order_rate_constant {init: 0.0};
    var alpha3_E50: millivolt {init: -1.235E2};
    var alpha3_Eslope: millivolt {init: 1.036E1};
    var beta1_0: first_order_rate_constant {init: 9.584E-3};
    var beta1_infinity: first_order_rate_constant {init: 2.619E1};
    var beta1_E50: millivolt {init: -2.529E1};
    var beta1_Eslope: millivolt {init: 6.206};
    var beta3_0: first_order_rate_constant {init: 0.0};
    var beta3_infinity: first_order_rate_constant {init: 1.507E1};
    var beta3_E50: millivolt {init: -7.443};
    var beta3_Eslope: millivolt {init: 1.323E1};
    var Ko: millimolar {pub: in};
    var E_Na: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var time: second {pub: in};
    var Em: millivolt {pub: in};
    i_f = i_fNa+i_fK;
    i_fNa = A_f*(pow(Ko, 1.83{dimensionless})/(pow(Ko, 1.83{dimensionless})+pow(Km_f, 1.83{dimensionless})))*g_f_Na*(Em-E_Na);
    i_fK = A_f*(pow(Ko, 1.83{dimensionless})/(pow(Ko, 1.83{dimensionless})+pow(Km_f, 1.83{dimensionless})))*P_f_K*g_f_K*(Em-E_K);
    ode(A_f, time) = alpha1*I2-(beta1+alpha2)*A_f;
    ode(I1, time) = alpha2*A_f+beta3*I2-alpha3*I1;
    ode(I2, time) = alpha3*I1+beta1*A_f-(beta3+alpha1)*I2;
    alpha1 = alpha1_infinity+(alpha1_0-alpha1_infinity)/(1.0{dimensionless}+exp((Em-alpha1_E50)/alpha1_Eslope));
    beta1 = beta1_infinity+(beta1_0-beta1_infinity)/(1.0{dimensionless}+exp((Em-beta1_E50)/beta1_Eslope));
    alpha2 = alpha2_infinity+(alpha2_0-alpha2_infinity)/(1.0{dimensionless}+exp((Em-alpha2_E50)/alpha2_Eslope));
    alpha3 = alpha3_infinity+(alpha3_0-alpha3_infinity)/(1.0{dimensionless}+exp((Em-alpha3_E50)/alpha3_Eslope));
    beta3 = beta3_infinity+(beta3_0-beta3_infinity)/(1.0{dimensionless}+exp((Em-beta3_E50)/beta3_Eslope));
  enddef;

  def comp sodium_potassium_pump_current as
    var i_NaK: picoA {pub: out};
    var Km_K: millimolar {init: 4.0E1};
    var Km_Na: millimolar {init: 1.0};
    var Ip_max: picoA {init: 2.463E2};
    var Nai: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Em: millivolt {pub: in};
    i_NaK = Ip_max*(Nai/(Nai+Km_Na))*(Ko/(Ko+Km_K))*(1.0{dimensionless}-sqr((Em-40.0{millivolt})/211.0{millivolt}));
  enddef;

  def comp transient_outward_current as
    var i_to: picoA {pub: out};
    var g_to: nanoS {init: 2.818E-1};
    var A_to: dimensionless {init: 1.220E-2};
    var I1: dimensionless {init: 6.310E-1};
    var I2: dimensionless {init: 2.697E-2};
    var I3: dimensionless;
    var alpha1: first_order_rate_constant;
    var alpha2: first_order_rate_constant;
    var alpha3: first_order_rate_constant;
    var alpha4: first_order_rate_constant;
    var beta1: first_order_rate_constant;
    var beta4: first_order_rate_constant;
    var alpha1_0: first_order_rate_constant {init: 3.723};
    var alpha1_infinity: first_order_rate_constant {init: 3.244E2};
    var alpha1_E50: millivolt {init: 2.695E1};
    var alpha1_Eslope: millivolt {init: 1.808E1};
    var alpha2_0: first_order_rate_constant {init: 3.713E2};
    var alpha2_infinity: first_order_rate_constant {init: 1.288E2};
    var alpha2_E50: millivolt {init: -9.952E1};
    var alpha2_Eslope: millivolt {init: 1.706E1};
    var alpha3_0: first_order_rate_constant {init: 4.309};
    var alpha3_infinity: first_order_rate_constant {init: 3.371E1};
    var alpha3_E50: millivolt {init: 1.886E1};
    var alpha3_Eslope: millivolt {init: 1.485E1};
    var alpha4_0: first_order_rate_constant {init: 1.167E2};
    var alpha4_infinity: first_order_rate_constant {init: 1.997E2};
    var alpha4_E50: millivolt {init: -8.894E1};
    var alpha4_Eslope: millivolt {init: 8.432E1};
    var beta1_0: first_order_rate_constant {init: 2.729E-2};
    var beta1_infinity: first_order_rate_constant {init: 1.451E2};
    var beta1_E50: millivolt {init: -1.075E1};
    var beta1_Eslope: millivolt {init: 5.012};
    var beta4_0: first_order_rate_constant {init: 2.805E-1};
    var beta4_infinity: first_order_rate_constant {init: 7.776};
    var beta4_E50: millivolt {init: -1.176E2};
    var beta4_Eslope: millivolt {init: 1.032E2};
    var E_K: millivolt {pub: in};
    var time: second {pub: in};
    var Em: millivolt {pub: in};
    i_to = g_to*A_to*(Em-E_K);
    ode(A_to, time) = alpha1*I3-(beta1+alpha2)*A_to;
    ode(I1, time) = alpha2*A_to-alpha3*I1;
    ode(I2, time) = alpha3*I1+beta4*I3-alpha4*I2;
    ode(I3, time) = beta1*A_to+alpha4*I2-(alpha1+beta4)*I3;
    alpha1 = alpha1_infinity+(alpha1_0-alpha1_infinity)/(1.0{dimensionless}+exp((Em-alpha1_E50)/alpha1_Eslope));
    beta1 = beta1_infinity+(beta1_0-beta1_infinity)/(1.0{dimensionless}+exp((Em-beta1_E50)/beta1_Eslope));
    alpha2 = alpha2_infinity+(alpha2_0-alpha2_infinity)/(1.0{dimensionless}+exp((Em-alpha2_E50)/alpha2_Eslope));
    alpha3 = alpha3_infinity+(alpha3_0-alpha3_infinity)/(1.0{dimensionless}+exp((Em-alpha3_E50)/alpha3_Eslope));
    alpha4 = alpha4_infinity+(alpha4_0-alpha4_infinity)/(1.0{dimensionless}+exp((Em-alpha4_E50)/alpha4_Eslope));
    beta4 = beta4_infinity+(beta4_0-beta4_infinity)/(1.0{dimensionless}+exp((Em-beta4_E50)/beta4_Eslope));
  enddef;

  def comp background_currents as
    var i_bNa: picoA {pub: out};
    var i_bCl: picoA {pub: out};
    var i_bK: picoA {pub: out};
    var g_bCl: nanoS {init: 8.691E-2};
    var Kb_K: dimensionless;
    var E_Cl: millivolt {pub: in};
    var g_Na: nanoS {pub: in};
    var E_Na: millivolt {pub: in};
    var Em: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    i_bNa = g_Na*(Em-E_Na);
    i_bK = Kb_K*pow(Ko, 0.41{dimensionless})*(Ki-Ko*exp(-(Em*F/(R*T))));
    i_bCl = g_bCl*(Em-E_Cl);
  enddef;

  def comp calcium_dynamics as
    var i_Ca_up: picoA {pub: out};
    var i_Ca_rel: picoA {pub: out};
    var i_Ca_tr: picoA {pub: out};
    var Iup_max: picoA {init: 2.120E1};
    var Km_Caup: millimolar {init: 5.000E-4};
    var Km_Carel: millimolar {init: 1.000E-3};
    var tau_rel: second {init: 5.000E-3};
    var tau_tr: second {init: 4.000E-1};
    var Vrel: picol {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cai: millimolar {pub: in};
    var Carel: millimolar {pub: in};
    var Caup: millimolar {pub: in};
    i_Ca_up = Iup_max*(1.0{dimensionless}/(1.0{dimensionless}+sqr(Km_Caup/Cai)));
    i_Ca_rel = 2.0{dimensionless}*F*Vrel/tau_rel*Carel*(1.0{dimensionless}/(1.0{dimensionless}+sqr(Km_Carel/Cai)));
    i_Ca_tr = 2.0{dimensionless}*F*Vrel/tau_tr*Caup;
  enddef;

  def comp ion_concentrations as
    var Cai: millimolar {pub: out, init: 1.275E-4};
    var Cao: millimolar {pub: out, init: 2.0};
    var Caup: millimolar {pub: out, init: 1.035};
    var Carel: millimolar {pub: out, init: 2.448E-1};
    var Nai: millimolar {pub: out, init: 8.004};
    var Nao: millimolar {pub: out, init: 1.400E2};
    var Ki: millimolar {pub: out, init: 1.499E2};
    var Ko: millimolar {pub: out, init: 5.389};
    var Cli: millimolar {pub: out, init: 2.607E1};
    var Clo: millimolar {pub: out, init: 1.400E2};
    var Vrel: picol {pub: out, init: 1.5E-2};
    var tau_b: second {init: 1.0E-1};
    var Cab: millimolar {init: 2.0};
    var Clb: millimolar {init: 1.4E2};
    var Kb: millimolar {init: 5.4};
    var Nab: millimolar {init: 1.4E2};
    var Vi: picol {init: 2.5};
    var Vup: picol {init: 3.5E-2};
    var Ve: picol {init: 5.0E-1};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_bNa: picoA {pub: in};
    var i_bK: picoA {pub: in};
    var i_fNa: picoA {pub: in};
    var i_fK: picoA {pub: in};
    var i_bCl: picoA {pub: in};
    var i_CaL: picoA {pub: in};
    var i_CaT: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_Ca_rel: picoA {pub: in};
    var i_Ca_tr: picoA {pub: in};
    var i_Ca_up: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_Na: picoA {pub: in};
    var i_Kr_Na: picoA {pub: in};
    var i_Ks_Na: picoA {pub: in};
    var i_Kr_K: picoA {pub: in};
    var i_Ks_K: picoA {pub: in};
    var i_to: picoA {pub: in};
    ode(Cai, time) = -((i_CaL+i_CaT+i_Ca_up-(2.0{dimensionless}*i_NaCa+i_Ca_rel))/(2.0{dimensionless}*F*Vi));
    ode(Caup, time) = (i_Ca_up-i_Ca_tr)/(2.0{dimensionless}*F*Vup);
    ode(Carel, time) = (i_Ca_tr-i_Ca_rel)/(2.0{dimensionless}*F*Vrel);
    ode(Cao, time) = (i_CaL+i_CaT-2.0{dimensionless}*i_NaCa)/(2.0{dimensionless}*F*Ve)+(Cab-Cao)/tau_b;
    ode(Nai, time) = -((i_Kr_Na+i_Ks_Na+i_Na+3.0{dimensionless}*i_NaCa+i_bNa+i_fNa+3.0{dimensionless}*i_NaK)/(F*Vi));
    ode(Nao, time) = (i_Kr_Na+i_Ks_Na+i_Na+3.0{dimensionless}*i_NaCa+i_bNa+i_fNa+3.0{dimensionless}*i_NaK)/(F*Ve)+(Nab-Nao)/tau_b;
    ode(Ki, time) = -((i_Kr_K+i_Ks_K+i_bK+i_fK+i_to-2.0{dimensionless}*i_NaK)/(F*Vi));
    ode(Ko, time) = (i_Kr_K+i_Ks_K+i_bK+i_fK+i_to-2.0{dimensionless}*i_NaK)/(F*Ve)+(Kb-Ko)/tau_b;
    ode(Cli, time) = i_bCl/(F*Vi);
    ode(Clo, time) = i_bCl/(F*Ve)+(Clb-Clo)/tau_b;
  enddef;

  def group as containment for
    comp membrane incl
      comp L_type_calcium_current;
      comp T_type_calcium_current;
      comp hyperpolarisation_activated_current;
      comp rapid_delayed_rectifying_potassium_current;
      comp slow_delayed_rectifying_potassium_current;
      comp TTX_sensitive_sodium_current;
      comp transient_outward_current;
      comp background_currents;
      comp sodium_potassium_pump_current;
      comp sodium_calcium_exchange_current;
      comp calcium_dynamics;
      comp ion_concentrations;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between L_type_calcium_current and environment for
    vars time and time;
  enddef;
  def map between T_type_calcium_current and environment for
    vars time and time;
  enddef;
  def map between hyperpolarisation_activated_current and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifying_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifying_potassium_current and environment for
    vars time and time;
  enddef;
  def map between TTX_sensitive_sodium_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between calcium_dynamics and environment for
    vars time and time;
  enddef;
  def map between ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between membrane and L_type_calcium_current for
    vars Em and Em;
    vars i_CaL and i_CaL;
  enddef;
  def map between membrane and T_type_calcium_current for
    vars Em and Em;
    vars i_CaT and i_CaT;
  enddef;
  def map between membrane and hyperpolarisation_activated_current for
    vars Em and Em;
    vars i_f and i_f;
  enddef;
  def map between membrane and rapid_delayed_rectifying_potassium_current for
    vars Em and Em;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and slow_delayed_rectifying_potassium_current for
    vars Em and Em;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and TTX_sensitive_sodium_current for
    vars Em and Em;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and transient_outward_current for
    vars Em and Em;
    vars i_to and i_to;
  enddef;
  def map between membrane and background_currents for
    vars Em and Em;
    vars i_bNa and i_bNa;
    vars i_bK and i_bK;
    vars i_bCl and i_bCl;
  enddef;
  def map between membrane and sodium_calcium_exchange_current for
    vars Em and Em;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between membrane and sodium_potassium_pump_current for
    vars Em and Em;
    vars i_NaK and i_NaK;
  enddef;
  def map between reversal_potentials and L_type_calcium_current for
    vars E_Ca_rev and E_Ca_rev;
  enddef;
  def map between reversal_potentials and T_type_calcium_current for
    vars E_Ca_rev and E_Ca_rev;
  enddef;
  def map between reversal_potentials and TTX_sensitive_sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and rapid_delayed_rectifying_potassium_current for
    vars E_Na and E_Na;
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and slow_delayed_rectifying_potassium_current for
    vars E_Na and E_Na;
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and sodium_calcium_exchange_current for
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between reversal_potentials and hyperpolarisation_activated_current for
    vars E_Na and E_Na;
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and transient_outward_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and background_currents for
    vars R and R;
    vars F and F;
    vars T and T;
    vars E_Na and E_Na;
    vars E_Cl and E_Cl;
  enddef;
  def map between reversal_potentials and calcium_dynamics for
    vars F and F;
  enddef;
  def map between reversal_potentials and ion_concentrations for
    vars F and F;
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ki and Ki;
    vars Ko and Ko;
    vars Cli and Cli;
    vars Clo and Clo;
    vars Cai and Cai;
    vars Cao and Cao;
  enddef;
  def map between ion_concentrations and L_type_calcium_current for
    vars Cai and Cai;
    vars i_CaL and i_CaL;
  enddef;
  def map between ion_concentrations and T_type_calcium_current for
    vars i_CaT and i_CaT;
  enddef;
  def map between ion_concentrations and rapid_delayed_rectifying_potassium_current for
    vars i_Kr_Na and i_Kr_Na;
    vars i_Kr_K and i_Kr_K;
  enddef;
  def map between ion_concentrations and slow_delayed_rectifying_potassium_current for
    vars i_Ks_Na and i_Ks_Na;
    vars i_Ks_K and i_Ks_K;
  enddef;
  def map between ion_concentrations and TTX_sensitive_sodium_current for
    vars i_Na and i_Na;
  enddef;
  def map between ion_concentrations and sodium_calcium_exchange_current for
    vars i_NaCa and i_NaCa;
    vars Cai and Cai;
    vars Nai and Nai;
    vars Cao and Cao;
    vars Nao and Nao;
  enddef;
  def map between ion_concentrations and hyperpolarisation_activated_current for
    vars i_fNa and i_fNa;
    vars i_fK and i_fK;
    vars Ko and Ko;
  enddef;
  def map between ion_concentrations and sodium_potassium_pump_current for
    vars i_NaK and i_NaK;
    vars Ko and Ko;
    vars Nai and Nai;
  enddef;
  def map between ion_concentrations and transient_outward_current for
    vars i_to and i_to;
  enddef;
  def map between ion_concentrations and background_currents for
    vars i_bNa and i_bNa;
    vars i_bK and i_bK;
    vars i_bCl and i_bCl;
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between ion_concentrations and calcium_dynamics for
    vars Caup and Caup;
    vars Carel and Carel;
    vars Cai and Cai;
    vars i_Ca_up and i_Ca_up;
    vars i_Ca_rel and i_Ca_rel;
    vars i_Ca_tr and i_Ca_tr;
    vars Vrel and Vrel;
  enddef;
  def map between TTX_sensitive_sodium_current and background_currents for
    vars g_Na and g_Na;
  enddef;
enddef;
