//   FILE :  LR_II_model_1994.xml
//
// CREATED :  28th March 2002
//
// LAST MODIFIED : 30th July 2003
//
// AUTHOR :  Catherine Lloyd
//           The Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the CellML Metadata 1.0 Specification released on 16th
// January, 2002.
//
// DESCRIPTION :  This file contains a CellML description of the mammalian
// ventricular action potential based on the Luo-Rudy II model, 1994.  This model
// is a development of the LR-I model.  In particular, the LR-II model describes
// the processes which regulate [Ca]i (intracellular Calcium concentration), and
// the movement of calcium ions through the cell and to and from the sarcoplasmic
// reticulum.
//
// CHANGES:
//   18/07/2002 - CML - Added more metadata.
//   09/04/2003 - AAC - Added publication date information.
//   05/06/2003 - CML - Fixed MathML in a few components.
//   30/07/2003 - CML - Fixed MathML in a few components.
// publisher: The University of Auckland, Auckland Bioengineering Institute
// created: W3CDTF 2002-03-28T00:00:00+00:00
// comment: This model contains a delay element in its mathematical description of CICR. Discrete delay elements can not yet be represented in CellML (as of CellML version 1.1) as as such, this model is non-functional.; FN James Lawson
// creator: Other May; Given Catherine; Family Lloyd; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz
// comment: This is the CellML description of Luo and Rudy's mathematical model of the mammalian cardiac ventricular action potential. It is a significant development on their original 1991 model. While this version of the model qualitatively compares well to the LR II paper for the action potential, the intracellular calcium dynamics have not been included correctly - namely there is no calcium-induced calcium-release (CICR) process in this version of the model. The original version of the model simulates CICR via a mechanism whereby CICR is induced if and only if the calcium accumulated in the cell in the 2 ms following (dV/dt)max exceeds a given threshold. This sort of process is a bit tricky to include in the CellML (or at least in a way that will work with the CellML abilitites of CMISS) so has been left out for now.; FN Catherine Lloyd
// comment: This is the CellML description of Luo and Rudy's mathematical model of the mammalian cardiac ventricular action potential. It is a significant development on their original 1991 model. While this version of the model qualitatively compares well to the LR II paper for the action potential, the intracellular calcium dynamics have not been included correctly - namely there is no calcium-induced calcium-release (CICR) process in this version of the model. The original version of the model simulates CICR via a mechanism whereby CICR is induced if and only if the calcium accumulated in the cell in the 2 ms following (dV/dt)max exceeds a given threshold. This sort of process is a bit tricky to include in the CellML (or at least in a way that will work with the CellML abilitites of CMISS) so has been left out for now.; FN Catherine Lloyd
// title: The Luo-Rudy II Model of Mammalian Ventricular Cardiac Action Potentials, 1994
// simulation: maximumStepSize .1; endingValue 10000
// bio_entity: Ventricular Myocyte
// species: Mammalia
// reference: subject_type keyword; _1 cardiac; _2 ventricular myocyte; _3 electrophysiology
// reference: Pubmed_id 7514509; title A Dynamic Model of the Cardiac Ventricular Action Potential I. Simulations of Ionic Currents and Concentration Changes; Given Ching-hsing; Family Luo; Given Yoram; Family Rudy; W3CDTF 1994-06-01; volume 74; first_page 1071; title Circulation Research; last_page 1096
// reference: Pubmed_id 7514509; title A Dynamic Model of the Cardiac Ventricular Action Potential I. Simulations of Ionic Currents and Concentration Changes; Given Ching-hsing; Family Luo; Given Yoram; Family Rudy; W3CDTF 1994-06-01; volume 74; first_page 1071; title Circulation Research; last_page 1096
def model luo_rudy_1994 as
  // A dynamic model of the cardiac ventricular action potential. I. Simulations of ionic currents and concentration changes
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model has been written to be compatible with CMISS. Alone it cannot be run and a new version will have to be created.
  //
  // Model Structure
  //
  // ABSTRACT: A mathematical model of the cardiac ventricular action potential is presented. In our previous work, the membrane Na+ current and K+ currents were formulated. The present article focuses on processes that regulate intracellular Ca2+ and depend on its concentration. The model presented here for the mammalian ventricular action potential is based mostly on the guinea pig ventricular cell. However, it provides the framework for modeling other types of ventricular cells with appropriate modifications made to account for species differences. The following processes are formulated: Ca2+ current through the L-type channel (ICa), the Na(+)-Ca2+ exchanger, Ca2+ release and uptake by the sarcoplasmic reticulum (SR), buffering of Ca2+ in the SR and in the myoplasm, a Ca2+ pump in the sarcolemma, the Na(+)-K+ pump, and a nonspecific Ca(2+)-activated membrane current. Activation of ICa is an order of magnitude faster than in previous models. Inactivation of ICa depends on both the membrane voltage and [Ca2+]i. SR is divided into two subcompartments, a network SR (NSR) and a junctional SR (JSR). Functionally, Ca2+ enters the NSR and translocates to the JSR following a monoexponential function. Release of Ca2+ occurs at JSR and can be triggered by two different mechanisms, Ca(2+)-induced Ca2+ release and spontaneous release. The model provides the basis for the study of arrhythmogenic activity of the single myocyte including afterdepolarizations and triggered activity. It can simulate cellular responses under different degrees of Ca2+ overload. Such simulations are presented in our accompanying article in this issue of Circulation Research.
  //
  // The original paper reference is cited below:
  //
  // A dynamic model of the cardiac ventricular action potential. I. Simulations of ionic currents and concentration changes, Ching-hsing Luo and Yoram Rudy, 1994, Circulation Research, 74, 1071-1097. PubMed ID: 7514509 (http://www.ncbi.nlm.nih.gov/pubmed/7514509)
  //
  // cell diagram of the LR-II model showing ionic currents, pumps and exchangers within the sarcolemma and the sarcoplasmic reticulum
  //
  // A schematic diagram describing the ionic currents, pumps and exchangers that are captured in the LR-II model. The intracellular compartment is the sarcoplasmic reticulum (SR), which is divided into the two subcompartments, the network SR (NSR) and the junctional SR (JSR). Ca2+ buffers are present in both the cytoplasm and the JSR.
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_mm as
    unit metre {expo: -1, pref: milli};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit mV_per_ms as
    unit mV;
    unit ms {expo: -1};
  enddef;
  def unit per_mV as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_mV_ms as
    unit mV {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit mS_per_mm2 as
    unit siemens {pref: milli};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit uF_per_mm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit uA_per_mm2 as
    unit ampere {pref: micro};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: nano};
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit gas_constant_units as
    unit joule {pref: pico};
    unit mole {expo: -1, pref: nano};
    unit kelvin {expo: -1};
  enddef;
  def unit faradays_constant_units as
    unit coulomb {pref: nano};
    unit mole {expo: -1, pref: nano};
  enddef;
  def unit mm_per_ms as
    unit metre {pref: milli};
    unit ms {expo: -1};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;

  def comp environment as
    var time: ms {pub: out};
  enddef;

  def comp membrane as
    var V: mV {init: -84.624, pub: out};
    var R: gas_constant_units {init: 8.3145e3, pub: out};
    var T: kelvin {init: 310.0, pub: out};
    var F: faradays_constant_units {init: 96845.0, pub: out};
    var dV_dt: mV_per_ms {pub: out};
    var Cm: uF_per_mm2 {init: 0.01};
    var I_st: uA_per_mm2;
    var time: ms {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_Ca_L: uA_per_mm2 {pub: in};
    var i_K: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_Kp: uA_per_mm2 {pub: in};
    var i_p_Ca: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_Ca_b: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_ns_Ca: uA_per_mm2 {pub: in};
    dV_dt = (I_st-(i_Na+i_Ca_L+i_K+i_K1+i_Kp+i_NaCa+i_p_Ca+i_Na_b+i_Ca_b+i_NaK+i_ns_Ca))/Cm;
    var stimPeriod: dimensionless {init: 1e3};
    var stimDuration: dimensionless {init: 0.5};
    var stimCurrent: dimensionless {init: 0.5};
    I_st = sel
      case rem(time, stimPeriod) < stimDuration:
        stimCurrent;
      otherwise:
        0.0{dimensionless};
    endsel;
    ode(V, time) = dV_dt;
  enddef;

  def comp fast_sodium_current as
    var i_Na: uA_per_mm2 {pub: out};
    var E_Na: mV {pub: out};
    var g_Na: mS_per_mm2 {init: 0.16};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var R: gas_constant_units {pub: in};
    var F: faradays_constant_units {pub: in};
    var T: kelvin {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*j*(V-E_Na);
    E_Na = R*T/F*ln(Nao/Nai);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.0, pub: out};
    var alpha_m: per_ms;
    var beta_m: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_m = 0.32{per_mV_ms}*(V+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    beta_m = 0.08{per_ms}*exp(-V/11.0{mV});
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 1.0, pub: out};
    var alpha_h: per_ms;
    var beta_h: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_h = sel
      case V < -40.0{mV}:
        0.135{per_ms}*exp((80.0{mV}+V)/(-6.8{mV}));
      otherwise:
        0.0{per_ms};
    endsel;
    beta_h = sel
      case V < -40.0{mV}:
        3.56{per_ms}*exp(0.079{mV}*V)+310000.0{per_ms}*exp(0.35{per_mV}*V);
      otherwise:
        1.0{dimensionless}/(0.13{ms}*(1.0{dimensionless}+exp((V+10.66{mV})/(-11.1{mV}))));
    endsel;
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  def comp fast_sodium_current_j_gate as
    var j: dimensionless {init: 1.0, pub: out};
    var alpha_j: per_ms;
    var beta_j: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_j = sel
      case V < -40.0{mV}:
        (-127140.0{per_mV_ms}*exp(0.2444{per_mV}*V)-0.00003474{per_mV_ms}*exp(-0.04391{per_mV}*V))*((V+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV}))));
      otherwise:
        0.0{per_ms};
    endsel;
    beta_j = sel
      case V < -40.0{mV}:
        0.1212{per_ms}*exp(-0.01052{per_mV}*V)/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV})));
      otherwise:
        0.3{per_ms}*exp(-0.0000002535{per_mV}*V)/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+32.0{mV})));
    endsel;
    ode(j, time) = alpha_j*(1.0{dimensionless}-j)-beta_j*j;
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L: uA_per_mm2 {pub: out};
    var i_CaCa: uA_per_mm2 {pub: out};
    var i_CaK: uA_per_mm2 {pub: out};
    var i_CaNa: uA_per_mm2 {pub: out};
    var gamma_Nai: dimensionless {init: 0.75, pub: out};
    var gamma_Nao: dimensionless {init: 0.75, pub: out};
    var gamma_Ki: dimensionless {init: 0.75, pub: out};
    var gamma_Ko: dimensionless {init: 0.75, pub: out};
    var I_CaCa: uA_per_mm2;
    var I_CaK: uA_per_mm2;
    var I_CaNa: uA_per_mm2;
    var P_Ca: mm_per_ms {init: 5.4e-6};
    var P_Na: mm_per_ms {init: 6.75e-9};
    var P_K: mm_per_ms {init: 1.93e-9};
    var gamma_Cai: dimensionless {init: 1.0};
    var gamma_Cao: dimensionless {init: 0.34};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var Cai: mM {priv: out, pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cao: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Ki: mM {pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    i_CaCa = d*f*f_Ca*I_CaCa;
    i_CaNa = d*f*f_Ca*I_CaNa;
    i_CaK = d*f*f_Ca*I_CaK;
    I_CaCa = P_Ca*sqr(2.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Cai*Cai*exp(2.0{dimensionless}*V*F/(R*T))-gamma_Cao*Cao)/(exp(2.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    I_CaNa = P_Na*sqr(1.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Nai*Nai*exp(1.0{dimensionless}*V*F/(R*T))-gamma_Nao*Nao)/(exp(1.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    I_CaK = P_K*sqr(1.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Ki*Ki*exp(1.0{dimensionless}*V*F/(R*T))-gamma_Ko*Ko)/(exp(1.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    i_Ca_L = i_CaCa+i_CaK+i_CaNa;
  enddef;

  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {init: 0.0, pub: out};
    var alpha_d: per_ms;
    var beta_d: per_ms;
    var d_infinity: dimensionless;
    var tau_d: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_d = d_infinity/tau_d;
    d_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-((V+10.0{mV})/6.24{mV})));
    tau_d = d_infinity*((1.0{dimensionless}-exp(-((V+10.0{mV})/6.24{mV})))/(0.035{per_mV_ms}*(V+10.0{mV})));
    beta_d = (1.0{dimensionless}-d_infinity)/tau_d;
    ode(d, time) = alpha_d*(1.0{dimensionless}-d)-beta_d*d;
  enddef;

  def comp L_type_Ca_channel_f_gate as
    var f: dimensionless {init: 1.0, pub: out};
    var alpha_f: per_ms;
    var beta_f: per_ms;
    var f_infinity: dimensionless;
    var tau_f: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_f = f_infinity/tau_f;
    f_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+35.06{mV})/8.6{mV}))+0.6{dimensionless}/(1.0{dimensionless}+exp((50.0{mV}-V)/20.0{mV}));
    tau_f = 1.0{ms}/(0.0197{dimensionless}*exp(-sqr(0.0337{per_mV}*(V+10.0{mV})))+0.02{dimensionless});
    beta_f = (1.0{dimensionless}-f_infinity)/tau_f;
    ode(f, time) = alpha_f*(1.0{dimensionless}-f)-beta_f*f;
  enddef;

  def comp L_type_Ca_channel_f_Ca_gate as
    var f_Ca: dimensionless {pub: out};
    var Km_Ca: mM {init: 0.6e-3};
    var V: mV {pub: in};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    f_Ca = 1.0{dimensionless}/(1.0{dimensionless}+sqr(Cai/Km_Ca));
  enddef;

  def comp time_dependent_potassium_current as
    var i_K: uA_per_mm2 {pub: out};
    var g_K_max: mS_per_mm2 {init: 2.82e-3};
    var g_K: mS_per_mm2;
    var E_K: mV;
    var PR_NaK: dimensionless {init: 0.01833};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var Nao: mM {pub: in};
    var Nai: mM {pub: in};
    var X: dimensionless {priv: in};
    var Xi: dimensionless {priv: in};
    g_K = g_K_max*sqrt(Ko/5.4{mM});
    E_K = R*T/F*ln((Ko+PR_NaK*Nao)/(Ki+PR_NaK*Nai));
    i_K = g_K*sqr(X)*Xi*(V-E_K);
  enddef;

  def comp time_dependent_potassium_current_X_gate as
    var X: dimensionless {init: 0.0, pub: out};
    var alpha_X: per_ms;
    var beta_X: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_X = 0.0000719{per_mV_ms}*(V+30.0{mV})/(1.0{dimensionless}-exp(-0.148{dimensionless}*(V+30.0{mV})));
    beta_X = 0.000131{per_mV_ms}*(V+30.0{mV})/(-1.0{dimensionless}+exp(0.0687{dimensionless}*(V+30.0{mV})));
    ode(X, time) = alpha_X*(1.0{dimensionless}-X)-beta_X*X;
  enddef;

  def comp time_dependent_potassium_current_Xi_gate as
    var Xi: dimensionless {pub: out};
    var V: mV {pub: in};
    var time: ms {pub: in};
    Xi = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-56.26{mV})/32.1{mV}));
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: uA_per_mm2 {pub: out};
    var E_K1: mV {priv: out, pub: out};
    var g_K1_max: mS_per_mm2 {init: 7.5e-3};
    var g_K1: mS_per_mm2;
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var K1_infinity: dimensionless {priv: in};
    g_K1 = g_K1_max*sqrt(Ko/5.4{mM});
    E_K1 = R*T/F*ln(Ko/Ki);
    i_K1 = g_K1*K1_infinity*(V-E_K1);
  enddef;

  def comp time_independent_potassium_current_K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: per_ms;
    var beta_K1: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    var E_K1: mV {pub: in};
    alpha_K1 = 1.02{per_ms}/(1.0{dimensionless}+exp(0.2385{per_mV}*(V-E_K1-59.215{mV})));
    beta_K1 = (0.49124{per_ms}*exp(0.08032{dimensionless}*(V+5.476{mV}-E_K1))+exp(0.06175{dimensionless}*(V-(E_K1+594.31{mV}))))/(1.0{dimensionless}+exp(-0.5143{per_mV}*(V-E_K1+4.753{mV})));
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
  enddef;

  def comp plateau_potassium_current as
    var i_Kp: uA_per_mm2 {pub: out};
    var E_Kp: mV;
    var g_Kp: mS_per_mm2 {init: 1.83e-4};
    var Kp: dimensionless;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_K1: mV {pub: in};
    E_Kp = E_K1;
    Kp = 1.0{dimensionless}/(1.0{dimensionless}+exp((7.488{mV}-V)/5.98{mV}));
    i_Kp = g_Kp*Kp*(V-E_Kp);
  enddef;

  def comp sarcolemmal_calcium_pump as
    var i_p_Ca: uA_per_mm2 {pub: out};
    var K_mpCa: mM {init: 0.5e-3};
    var I_pCa: uA_per_mm2 {init: 1.15e-2};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    i_p_Ca = I_pCa*(Cai/(K_mpCa+Cai));
  enddef;

  def comp sodium_background_current as
    var i_Na_b: uA_per_mm2 {pub: out};
    var g_Nab: mS_per_mm2 {init: 1.41e-5};
    var E_NaN: mV;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_Na: mV {pub: in};
    E_NaN = E_Na;
    i_Na_b = g_Nab*(V-E_NaN);
  enddef;

  def comp calcium_background_current as
    var i_Ca_b: uA_per_mm2 {pub: out};
    var g_Cab: mS_per_mm2 {init: 3.016e-5};
    var E_CaN: mV;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    E_CaN = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V-E_CaN);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: uA_per_mm2 {pub: out};
    var I_NaK: uA_per_mm2 {init: 1.5e-2};
    var f_NaK: dimensionless;
    var K_mNai: mM {init: 10.0};
    var K_mKo: mM {init: 1.5};
    var sigma: dimensionless;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*(V*F/(R*T)))+0.0365{dimensionless}*sigma*exp(-(V*F/(R*T))));
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Nao/67.3{dimensionless})-1.0{dimensionless});
    i_NaK = I_NaK*f_NaK*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_mNai/Nai, 1.5{dimensionless})))*(Ko/(Ko+K_mKo));
  enddef;

  def comp non_specific_calcium_activated_current as
    var i_ns_Ca: uA_per_mm2 {pub: out};
    var i_ns_Na: uA_per_mm2 {pub: out};
    var i_ns_K: uA_per_mm2 {pub: out};
    var P_ns_Ca: mm_per_ms {init: 1.75e-9};
    var gamma_Nai: dimensionless {pub: in};
    var gamma_Nao: dimensionless {pub: in};
    var gamma_Ki: dimensionless {pub: in};
    var gamma_Ko: dimensionless {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cao: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Ki: mM {pub: in};
    var I_ns_Na: uA_per_mm2;
    var I_ns_K: uA_per_mm2;
    var K_m_ns_Ca: mM {init: 1.2e-3};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    var V: mV {pub: in};
    var Vns: mV;
    var EnsCa: mV;
    EnsCa = R*T/F*ln((Ko+Nao)/(Ki+Nai));
    Vns = V-EnsCa;
    i_ns_Na = I_ns_Na*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_m_ns_Ca/Cai, 3.0{dimensionless})));
    i_ns_K = I_ns_K*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_m_ns_Ca/Cai, 3.0{dimensionless})));
    i_ns_Ca = i_ns_Na+i_ns_K;
    I_ns_Na = P_ns_Ca*sqr(1.0{dimensionless})*(Vns*sqr(F)/(R*T))*((gamma_Nai*Nai*exp(1.0{dimensionless}*Vns*F/(R*T))-gamma_Nao*Nao)/(exp(1.0{dimensionless}*Vns*F/(R*T))-1.0{dimensionless}));
    I_ns_K = P_ns_Ca*sqr(1.0{dimensionless})*(Vns*sqr(F)/(R*T))*((gamma_Ki*Ki*exp(1.0{dimensionless}*Vns*F/(R*T))-gamma_Ko*Ko)/(exp(1.0{dimensionless}*Vns*F/(R*T))-1.0{dimensionless}));
  enddef;

  def comp Na_Ca_exchanger as
    var i_NaCa: uA_per_mm2 {pub: out};
    var K_NaCa: uA_per_mm2 {init: 20.0};
    var K_mNa: mM {init: 87.5};
    var K_mCa: mM {init: 1.38};
    var K_sat: dimensionless {init: 0.1};
    var eta: dimensionless {init: 0.35};
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    i_NaCa = K_NaCa*(1.0{dimensionless}/(pow(K_mNa, 3.0{dimensionless})+pow(Nao, 3.0{dimensionless})))*(1.0{dimensionless}/(K_mCa+Cao))*(1.0{dimensionless}/(1.0{dimensionless}+K_sat*exp((eta-1.0{dimensionless})*V*(F/(R*T)))))*(exp(eta*V*(F/(R*T)))*pow(Nai, 3.0{dimensionless})*Cao-exp((eta-1.0{dimensionless})*V*(F/(R*T)))*pow(Nao, 3.0{dimensionless})*Cai);
  enddef;

  def comp calcium_fluxes_in_the_SR as
    var i_rel: mM_per_ms {pub: out};
    var i_up: mM_per_ms {pub: out};
    var i_leak: mM_per_ms {pub: out};
    var i_tr: mM_per_ms {pub: out};
    var G_rel: per_ms;
    var G_rel_peak: per_ms;
    var G_rel_max: per_ms {init: 60.0};
    var tau_on: ms {init: 2.0};
    var tau_off: ms {init: 2.0};
    var t_CICR: ms {init: 0.0};
    var tau_tr: ms {init: 180.0};
    var K_mrel: mM {init: 0.8e-3};
    var K_mup: mM {init: 0.92e-3};
    var K_leak: per_ms;
    var I_up: mM_per_ms {init: 0.005};
    var Ca_NSR_max: mM {init: 15.0};
    var delta_Ca_i2: mM {init: 0.0};
    var delta_Ca_ith: mM {init: 0.18e-3};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    var Ca_JSR: mM {pub: in};
    var Ca_NSR: mM {pub: in};
    i_rel = G_rel*(Ca_JSR-Cai);
    G_rel = G_rel_peak*((delta_Ca_i2-delta_Ca_ith)/(K_mrel+delta_Ca_i2-delta_Ca_ith))*(1.0{dimensionless}-exp(-(t_CICR/tau_on)))*exp(-(t_CICR/tau_off));
    G_rel_peak = sel
      case delta_Ca_i2 < delta_Ca_ith:
        0.0{per_ms};
      otherwise:
        G_rel_max;
    endsel;
    i_up = I_up*(Cai/(Cai+K_mup));
    i_leak = K_leak*Ca_NSR;
    K_leak = I_up/Ca_NSR_max;
    i_tr = (Ca_NSR-Ca_JSR)/tau_tr;
  enddef;

  def comp ionic_concentrations as
    var Nai: mM {init: 10.0, pub: out};
    var Nao: mM {init: 140.0, pub: out};
    var Cai: mM {init: 0.12e-3, pub: out};
    var Cao: mM {init: 1.8, pub: out};
    var Ki: mM {init: 145.0, pub: out};
    var Ko: mM {init: 5.4, pub: out};
    var Ca_JSR: mM {init: 1.8, pub: out};
    var Ca_NSR: mM {init: 1.8, pub: out};
    var Am: per_mm {init: 200};
    var V_myo: dimensionless {init: 0.68};
    var V_JSR: dimensionless {init: 0.0048};
    var V_NSR: dimensionless {init: 0.0552};
    var time: ms {pub: in};
    var F: faradays_constant_units {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_CaNa: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_ns_Na: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_CaCa: uA_per_mm2 {pub: in};
    var i_CaK: uA_per_mm2 {pub: in};
    var i_p_Ca: uA_per_mm2 {pub: in};
    var i_Ca_b: uA_per_mm2 {pub: in};
    var i_K: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_Kp: uA_per_mm2 {pub: in};
    var i_ns_K: uA_per_mm2 {pub: in};
    var i_tr: mM_per_ms {pub: in};
    var i_rel: mM_per_ms {pub: in};
    var i_leak: mM_per_ms {pub: in};
    var i_up: mM_per_ms {pub: in};
    ode(Nai, time) = -(i_Na+i_CaNa+i_Na_b+i_ns_Na+i_NaCa*3.0{dimensionless}+i_NaK*3.0{dimensionless})*(Am/(V_myo*F));
    ode(Cai, time) = -(i_CaCa+i_p_Ca+i_Ca_b-i_NaCa)*(Am/(2.0{dimensionless}*V_myo*F))+i_rel*(V_JSR/V_myo)+(i_leak-i_up)*(V_NSR/V_myo);
    ode(Ki, time) = -(i_CaK+i_K+i_K1+i_Kp+i_ns_K+(-(i_NaK*2.0{dimensionless})))*(Am/(V_myo*F));
    ode(Ca_JSR, time) = -(i_rel-i_tr*(V_NSR/V_JSR));
    ode(Ca_NSR, time) = -(i_leak+i_tr-i_up);
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
      comp L_type_Ca_channel_f_Ca_gate;
    endcomp;
    comp time_dependent_potassium_current incl
      comp time_dependent_potassium_current_X_gate;
      comp time_dependent_potassium_current_Xi_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between plateau_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between non_specific_calcium_activated_current and environment for
    vars time and time;
  enddef;
  def map between ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between calcium_fluxes_in_the_SR and environment for
    vars time and time;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_dependent_potassium_current for
    vars V and V;
    vars i_K and i_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and non_specific_calcium_activated_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_ns_Ca and i_ns_Ca;
  enddef;
  def map between membrane and ionic_concentrations for
    vars F and F;
  enddef;
  def map between fast_sodium_current and ionic_concentrations for
    vars i_Na and i_Na;
    vars Nao and Nao;
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_Ca_channel and ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_CaCa and i_CaCa;
    vars i_CaNa and i_CaNa;
    vars i_CaK and i_CaK;
  enddef;
  def map between time_dependent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nao and Nao;
    vars Nai and Nai;
    vars i_K and i_K;
  enddef;
  def map between Na_Ca_exchanger and ionic_concentrations for
    vars Cai and Cai;
    vars Nai and Nai;
    vars Cao and Cao;
    vars Nao and Nao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between time_independent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K1 and i_K1;
  enddef;
  def map between plateau_potassium_current and time_independent_potassium_current for
    vars E_K1 and E_K1;
  enddef;
  def map between plateau_potassium_current and ionic_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between sarcolemmal_calcium_pump and ionic_concentrations for
    vars i_p_Ca and i_p_Ca;
    vars Cai and Cai;
  enddef;
  def map between sodium_background_current and ionic_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars i_NaK and i_NaK;
  enddef;
  def map between non_specific_calcium_activated_current and ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_ns_Na and i_ns_Na;
    vars i_ns_K and i_ns_K;
  enddef;
  def map between calcium_fluxes_in_the_SR and ionic_concentrations for
    vars i_rel and i_rel;
    vars i_tr and i_tr;
    vars i_leak and i_leak;
    vars i_up and i_up;
    vars Cai and Cai;
    vars Ca_JSR and Ca_JSR;
    vars Ca_NSR and Ca_NSR;
  enddef;
  def map between L_type_Ca_channel and non_specific_calcium_activated_current for
    vars gamma_Nao and gamma_Nao;
    vars gamma_Nai and gamma_Nai;
    vars gamma_Ko and gamma_Ko;
    vars gamma_Ki and gamma_Ki;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars time and time;
    vars Cai and Cai;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_X_gate for
    vars X and X;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_Xi_gate for
    vars Xi and Xi;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars K1_infinity and K1_infinity;
    vars E_K1 and E_K1;
    vars time and time;
    vars V and V;
  enddef;
enddef;
// rdf:#06b56481-8a0b-44e4-b51e-becc5946d0ae
// value: The opening rate of the d gate.
// rdf:#b24b01df-79b2-4688-9b1a-6afaf16c3f68
// value: The kinetics of the m gate.
// rdf:#39e0edc2-396f-45b0-9183-a47833a14cfd
// value: The gating variable for the time-independent potassium current - the K1 gate.
// cellml://cellml#beta_d_calculation_eq
// comment: The closing rate of the d gate.
// rdf:#eca238c5-1bac-4ef4-ba1b-1957814fb5a0
// value: The reversal potential for the channel.
// cellml://cellml#i_rel_calculation_eq
// comment: The release flux from the junctional sarcoplasmic reticulum into the cytosol.
// cellml://cellml#i_CaCa_calculation_eq
// comment: The calcium component of the total L-type channel current.
// cellml://cellml#membrane
// comment: The main component for the model, contains all ionic currents and defines the transmembrane potential.
// rdf:#e3b59417-3a58-4c54-8ac2-4f3ace00863b
// value: The opening rate for the K1 gate.
// cellml://cellml#i_ns_K_calculation_eq
// comment: The potassium component of the channel's current.
// cellml://cellml#alpha_f_calculation_eq
// comment: The opening rate of the f gate.
// rdf:#2cf60e99-7a37-4381-8053-6ce89db98df3
// value: We need to use dV/dt in the calulation of calcium-induced calcium-release, so we make it accessible here.
// cellml://cellml#L_type_Ca_channel_d_gate
// comment: The voltage-dependent activation gate for the L-type calcium channel - the d gate.
// cellml://cellml#alpha_K1_calculation_eq
// rdf:#3c3b2d5a-50bc-48f8-ae79-7e82b3cf3745
// value: c.lloyd@auckland.ac.nz
// rdf:#5e0e2c60-77e0-4562-b96f-ac1c98a7a28e
// value: The maximum calcium component of the total L-type channel current.
// rdf:#b5770b23-e0d6-4651-b301-346789ff2487
// value: Calculation of the exchanger current.
// cellml://cellml#sodium_potassium_pump
// comment: The sodium/potassium exchanger current which extrudes three sodium ions from the cell in exchange for two potassium ions entering the cell.
// rdf:#b93c8b21-d95e-4b2b-b211-94bc4ac4e74b
// value: Fixed maths.
// modified: W3CDTF 2003-07-30
// modifier: Other May; Given Catherine; Family Lloyd
// cellml://cellml#I_ns_Na_calculation_eq
// comment: The maximum sodium component of the channel's current.
// rdf:#c1a52631-c294-44d6-ac5a-874857131743
// value: The gating kinetics for the channel.
// cellml://cellml#time_independent_potassium_current_K1_gate
// cellml://cellml#calcium_background_current
// comment: The background calcium current.
// rdf:#8f34572e-b813-455a-8370-a4c302d20c12
// N: Other May; Given Catherine; Family Lloyd
// ORG: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// rdf:#06477d3e-368a-4468-b526-75ec896e4d78
// value: The kinetics of for the j gate.
// rdf:#2b24949f-d4c5-42a8-b723-5eb181fad921
// value: The reversal potential of the channel.
// cellml://cellml#I_ns_K_calculation_eq
// comment: The maximum potassium component of the channel's current.
// cellml://cellml#I_CaCa_calculation_eq
// cellml://cellml#L_type_Ca_channel
// comment: The L-type calcium channel. Primarily a calcium specific channel, but with small potassium and sodium components, activated at plateau potentials.
// rdf:#8905761e-5adb-4bad-bde8-40ac702a9e82
// value: The kinetics of the h gate.
// cellml://cellml#IStim_for_cmiss_eq
// comment: This is a dummy equation that we simply use to make grabbing the value in CMISS much easier.
// cellml://cellml#K1_infinity_calculation_eq
// comment: The steady-state kinetics of the K1 gate.
// rdf:#111cbb8c-9173-42a2-9b70-d7e7ef9d2e1a
// value: The time-dependent potassium reploarisation current.
// rdf:#8c799ef3-8524-4d3c-b034-02521d109e44
// Other: May
// Given: Catherine
// Family: Lloyd
// cellml://cellml#time_dependent_potassium_current_X_gate
// comment: The time-dependent activation gate for the time-dependent potassium current - the X gate.
// rdf:#5bfd99b6-78b5-41cc-8e53-5a1b9c86e9a6
// value: Assign the rate of change of potential for the differential equation.
// rdf:#fd6ed334-98de-4f5d-869d-34b78004ae8c
// value: The voltage-dependent inactivation gate for the fast sodium channel - the h gate.
// cellml://cellml#i_Na_calculation_eq
// comment: Calculation of the fast sodium current.
// cellml://cellml#time_dependent_potassium_current_Xi_gate
// comment: The time-independent inactivation gate for the time-dependent potassium current - the Xi gate.
// rdf:#3d8953ae-2ae0-4a86-80d5-f65c1d6ae520
// value: The change in calcium concentration in the junctional sarcoplasmic reticulum.
// cellml://cellml#fast_sodium_current_m_gate
// comment: The voltage-dependent activation gate for the fast sodium channel - the m gate.
// rdf:#9845ea23-14d8-4e82-93a4-d57bad1885df
// value: The change in intracellular calcium concentration.
// cellml://cellml#i_leak_calculation_eq
// comment: Calcium leak flux from the network sarcoplasmic reticulum into the cytosol.
// cellml://cellml#df_dt_eq
// comment: The kinetics of the f gate.
// rdf:#8710373c-3c70-4e66-8de9-b935dad3d7a2
// value: The total current through the channel.
// rdf:#47f37758-7bc6-485f-8a2f-3b30c2b18ad5
// value: Calculation of the channel conductance.
// cellml://cellml#beta_h_calculation_eq
// comment: The closing rate for the h gate.
// cellml://cellml#calcium_fluxes_in_the_SR
// comment: The various calcium fluxes into and from the sarcoplasmic reticulum.
// rdf:#11405b4e-4614-4f56-aaf9-b2bf0029ad2b
// value: The change in intracellular potassium concentration.
// cellml://cellml#L_type_Ca_channel_f_gate
// comment: The voltage-dependent inactivation gate for the L-type calcium channel - the f gate.
// cellml://cellml#E_NaN_calculation_eq
// rdf:#6d7bfeaf-c43a-435d-8608-f02c5e4fdbce
// W3CDTF: 2003-06-05
// cellml://cellml#potassium_internal_diff_eq
// cellml://cellml#dV_dt_eq
// cellml://cellml#alpha_j_calculation_eq
// comment: The opening rate for the j gate.
// cellml://cellml#i_CaNa_calculation_eq
// comment: The sodium component of the total L-type channel current.
// cellml://cellml#sarcolemmal_calcium_pump
// comment: A calcium pump for removal of calcium from the cytosol to the extracellular space.
// rdf:#fda547bd-f935-468c-b90e-b8411713034c
// value: Calculation of the release channel conductance. This is incorrect as there is no CICR induced via the accumulation of calcium in the cytosol in the period following max(dV/dt)
// cellml://cellml#L_type_Ca_channel_f_Ca_gate
// comment: The calcium-dependent inactivation gate for the L-type calcium channel - the fCa gate.
// cellml://cellml#i_K1_calculation_eq
// comment: Calculation of the channel current.
// rdf:#9795c58e-41a2-48e6-8c6f-c48c07c0e3f8
// value: Calculation of the current.
// cellml://cellml#E_Kp_calculation_eq
// comment: The reversal potential for the channel.
// cellml://cellml#i_Ca_b_calculation_eq
// comment: Calculation of the current.
// cellml://cellml#beta_X_calculation_eq
// comment: The closing rate for the X gate.
// cellml://cellml#Xi_calculation_eq
// comment: The kinetics of the Xi gate.
// cellml://cellml#i_Kp_calculation_eq
// rdf:#75ec6763-3e25-4571-b618-2fbfb9df363f
// value: A non-specific calcium activated channel - assumed impermeable to calcium ions but permeable to sodium and potassium ions.
// rdf:#58ac972c-67fa-4760-8dd0-25e3774cc6b9
// value: The potassium current active at plateau potentials.
// rdf:#a5c00cfc-0944-4520-912f-97cf98a40559
// W3CDTF: 2002-03-28
// rdf:#6114ba02-ae30-4208-993c-f7c95eb48ad0
// value: The sodium component of the channel's current.
// rdf:#c11aa70d-eb7a-43cd-98d8-92aaf242d822
// value: The sodium-calcium exchanger current, exchanges three sodium ions for one calcium ion.
// cellml://cellml#Na_Ca_exchanger_eq
// comment: Calculation of the exchanger current.
// cellml://cellml#membrane_voltage_diff_eq
// rdf:#6cc8d6e1-e5ee-4fa4-8eb2-d0cfd3297cbe
// value: The background sodium current.
// rdf:#a62cff51-2a07-4dc8-bf52-072b950d2c45
// value: The fast sodium current is primarily responsible for the upstroke of the action potential.
// cellml://cellml#E_K_calculation_eq
// rdf:#80947412-cef4-45d5-8e08-03e24effedb5
// value: Translocation flux from the network to the junctional sarcoplasmic reticulum.
// cellml://cellml#G_rel_calculation_eq
// rdf:#7e2e55a0-16a4-4c73-846b-7011ade1e340
// value: The time-independent potassium repolarisation current.
// cellml://cellml#alpha_h_calculation_eq
// comment: The opening rate for the h gate.
// rdf:#c3ab0860-e7bc-4272-99bb-27831d3c5872
// value: The closing rate for the j gate.
// cellml://cellml#I_CaNa_calculation_eq
// comment: The maximum sodium component of the total L-type channel current.
// rdf:#df428f1e-3520-4930-bbca-bcb82223dcd1
// value: The closing rate for the K1 gate.
// cellml://cellml#i_NaK_calculation_eq
// cellml://cellml#i_ns_Ca_calculation_eq
// rdf:#e70eab76-ebf0-472c-b3f7-586ca26f6190
// value: The opening rate for the X gate.
// rdf:#b9af0253-a338-41b1-9897-c03504cb1f54
// value: Calculation of the current.
// rdf:#90659886-14c8-4ca0-9ae9-ad99d85d57b8
// value: The total current of the L-type channel current.
// cellml://cellml#alpha_d_calculation_eq
// rdf:#60f5de3b-a543-42b2-b867-a60ca08189d7
// value: The change in intracellular sodium concentration.
// cellml://cellml#beta_f_calculation_eq
// comment: The closing rate of the f gate.
// rdf:#f21980b4-b4fe-4b55-b51a-4848904f7cc1
// value: The voltage-dependent slow inactivation gate for the fast sodium channel - the j gate.
// cellml://cellml#alpha_m_calculation_eq
// comment: The opening rate for the m gate.
// rdf:#4259f9af-a657-48bc-9e88-37d186943043
// value: Fixed maths: alpha_J_calculation in fast_sodium_current_j_gate, beta_K1_calculation in time_independent_potassium_current_K1_gate, and i_NaK_calculation in sodium_potassium_pump.
// rdf:#eeea0bfd-f962-49f4-90aa-560d9b2ff5aa
// value: The conductance for the channel.
// rdf:#74c8f184-9256-4be1-beab-ac8b7276f635
// value: The kinetics of the fCa gate.
// cellml://cellml#g_K1_calculation_eq
// cellml://cellml#i_p_Ca_calculation_eq
// comment: The calcium pump current.
// cellml://cellml#EnsCa_calculation_eq
// comment: The channel reversal potential.
// cellml://cellml#plateau_potassium_current
// cellml://cellml#ionic_concentrations
// comment: Component grouping together the differential equations for the various ionic concentrations that the model tracks.
// rdf:#6ed40cfe-2830-4c4d-b6ff-2ab75608d720
// value: The change in calcium concentration in the network sarcoplasmic reticulum.
// cellml://cellml#fast_sodium_current_h_gate
// cellml://cellml#Na_Ca_exchanger
// rdf:#53493837-f9f6-4536-b2e1-bf2ea45f0690
// value: The kinetics of the d gate.
// cellml://cellml#dd_dt_eq
// cellml://cellml#i_CaK_calculation_eq
// comment: The potassium component of the total L-type channel current.
// cellml://cellml#i_tr_calculation_eq
// rdf:#1150b3fc-c6e2-4389-9c48-c566f671553c
// value: Calculation of reversal potential for the fast sodium channel.
// cellml://cellml#fast_sodium_current_j_gate
// cellml://cellml#f_Ca_calculation_eq
// cellml://cellml#fast_sodium_current
// cellml://cellml#alpha_X_calculation_eq
// cellml://cellml#i_up_calculation_eq
// comment: The uptake flux into the sarcoplasmic reticulum from the cytosol.
// cellml://cellml#dh_dt_eq
// cellml://cellml#g_K_calculation_eq
// rdf:#6f57b22d-9d38-4fd7-a2e3-c020dd11ee72
// value: The closing rate for the m gate.
// cellml://cellml#calcium_internal_diff_eq
// rdf:#5883b036-a136-49be-908e-0035c14c9d3e
// value: Calculation of the channel reversal potential.
// cellml://cellml#i_Ca_L_calculation_eq
// cellml://cellml
// publisher: The University of Auckland, Auckland Bioengineering Institute
// rdf:#a0fb41c6-024b-4adb-9bb9-9a86fcfbe740
// value: Calculation of the current.
// cellml://cellml#sodium_diff_eq
// cellml://cellml#beta_m_calculation_eq
// cellml://cellml#i_Na_b_calculation_eq
// cellml://cellml#i_K_calculation_eq
// rdf:#8da7daa7-8b4f-4d33-a5d5-0a2c1c2cd177
// value: The kinetics of the X gate.
// cellml://cellml#E_K1_calculation_eq
// cellml://cellml#non_specific_calcium_activated_current
// cellml://cellml#time_independent_potassium_current
// cellml://cellml#E_Na_calculation_eq
// rdf:#87a92d7c-0058-4baf-b791-0450ebf7b58a
// value: The reversal potential for the channel.
// cellml://cellml#calcium_JSR_diff_eq
// cellml://cellml#dX_dt_eq
// cellml://cellml#dj_dt_eq
// cellml://cellml#beta_K1_calculation_eq
// cellml://cellml#calcium_NSR_diff_eq
// cellml://cellml#i_ns_Na_calculation_eq
// rdf:#06aad638-233d-4443-aa4b-48d2117be163
// value: The maximum potassium component of the total L-type channel current.
// cellml://cellml#I_CaK_calculation_eq
// cellml://cellml#sodium_background_current
// cellml://cellml#E_CaN_calculation_eq
// cellml://cellml#Kp_calculation_eq
// cellml://cellml#dm_dt_eq
// cellml://cellml#time_dependent_potassium_current
// cellml://cellml#beta_j_calculation_eq
