// This CellML file was generated on 11/01/2008 at 16:04:29 using:
//
// COR (0.9.31.849)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// publisher: Department of Physiology, Anatomy & Genetics, University of Oxford
// comment: FN James Lawson; This file is a CellML description of the model described inMahajan et al's 2008 paper "A rabbit ventricular action potential model replicating cardiac dynamics at rapid heart rates"
// created: W3CDTF 2008-01-11T00:00:00+13:00
// creator: Orgname Oxford University; Orgunit Department of Physiology, Anatomy & Genetics; penny.noble@dpag.ox.ac.uk; Given Penny; Family Noble; Other J
// simulation: endingValue 5000; nonstandard-pointDensity 5000
// reference: Pubmed_id 18160660; Given A; Family Mahajan; Given Y; Family Shiferaw; Given D; Family Sato; Given A; Family Baher; Given R; Family Olcese; Given L; Family Xie; Other H; Given M; Family Yang; Other J; Given P; Family Chen; Other S; Given J; Family Restrepo; Other G; Given A; Family Karma; Given A; Family Garfinkel; Given Z; Family Qu; Given J; Family Weiss; Other N; title A rabbit ventricular action potential model replicating cardiac dynamics at rapid heart rates; volume 94(2); first_page 392; title Biophysical Journal; W3CDTF 2008-01-01 00:00; last_page 410
// reference: subject_type keyword; electrophysiology; cardiac; rabbit
// comment: FN James Lawson; This model is known to run in PCEnv and COR to reproduce the output shown in the publication.
def model mahajan_2008 as
  // Model Status
  //
  // This model is known to run in OpenCell and COR to reproduce the output shown in the publication. The units have been checked and they are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: Mathematical modeling of the cardiac action potential has proven to be a powerful tool for illuminating various aspects of cardiac function, including cardiac arrhythmias. However, no currently available detailed action potential model accurately reproduces the dynamics of the cardiac action potential and intracellular calcium (Ca(i)) cycling at rapid heart rates relevant to ventricular tachycardia and fibrillation. The aim of this study was to develop such a model. Using an existing rabbit ventricular action potential model, we modified the L-type calcium (Ca) current (I(Ca,L)) and Ca(i) cycling formulations based on new experimental patch-clamp data obtained in isolated rabbit ventricular myocytes, using the perforated patch configuration at 35-37 degrees C. Incorporating a minimal seven-state Markovian model of I(Ca,L) that reproduced Ca- and voltage-dependent kinetics in combination with our previously published dynamic Ca(i) cycling model, the new model replicates experimentally observed action potential duration and Ca(i) transient alternans at rapid heart rates, and accurately reproduces experimental action potential duration restitution curves obtained by either dynamic or S1S2 pacing.
  //
  // model diagram
  //
  // Schematic diagram of the Mahajan et al model, featuring whole-cell model showing basic elements of Ca cycling machinery and membrane ion currents, as well as a seven-state Markovian model of the L-type Ca channel.
  //
  // The original publication reference is cited below:
  //
  // A rabbit ventricular action potential model replicating cardiac dynamics at rapid heart rates, Mahajan A, Shiferaw Y, Sato D, Baher A, Olcese R, Xie LH, Yang MJ, Chen PS, Restrepo JG, Karma A, Garfinkel A, Qu Z, Weiss JN, 2008 Biophysical Journal, 94(2):392-410 PubMed ID: 18160660 (http://www.ncbi.nlm.nih.gov/pubmed/18160660?ordinalpos=2&itool=EntrezSystem2.PEntrez.Pubmed.Pubmed_ResultsPanel.Pubmed_RVDocSum)
  def unit u_per_m as
    unit second {pref: micro};
    unit second {pref: milli, expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit mV {expo: -1};
  enddef;
  def unit uS_per_nF as
    unit siemens {pref: micro};
    unit farad {pref: nano, expo: -1};
  enddef;
  def unit nA_per_nF as
    unit ampere {pref: nano};
    unit farad {pref: nano, expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit molar {pref: milli};
  enddef;
  def unit uM as
    unit molar {pref: micro};
  enddef;
  def unit mM4 as
    unit molar {pref: milli, expo: 4};
  enddef;
  def unit mV_per_uM as
    unit mV;
    unit molar {pref: micro, expo: -1};
  enddef;
  def unit uM_per_ms as
    unit molar {pref: micro};
    unit per_ms;
  enddef;
  def unit per_uM_per_ms as
    unit uM {expo: -1};
    unit per_ms;
  enddef;
  def unit J_per_moleK as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mmole as
    unit coulomb;
    unit mole {pref: milli, expo: -1};
  enddef;
  def unit cm_per_s as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit mA_per_cm2 as
    unit ampere {pref: milli};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit mmole_per_coulomb_cm as
    unit mole {pref: milli};
    unit coulomb {expo: -1};
    unit metre {pref: centi, expo: -1};
  enddef;

  def comp Environment as
    var time: ms {pub: out};
    var R: J_per_moleK {init: 8.314472};
    var T: kelvin {init: 308};
    var F: coulomb_per_mmole {pub: out, init: 96.4853415};
    var K_o: mM {pub: out, init: 5.4};
    var Ca_o: mM {pub: out, init: 1.8};
    var Na_o: mM {pub: out, init: 136};
    var FonRT: per_mV {pub: out};
    FonRT = F/(R*T);
  enddef;

  def comp cell as
    var time: ms {pub: in};
    var V: mV {pub: out, init: -87.169816169406};
    var xik1: nA_per_nF {pub: in};
    var xito: nA_per_nF {pub: in};
    var xiNaK: nA_per_nF {pub: in};
    var wca: mV_per_uM {pub: out, init: 8};
    var xiNaCa: nA_per_nF {pub: in};
    var xica: nA_per_nF {pub: in};
    var Itotal: nA_per_nF;
    var xina: nA_per_nF {pub: in};
    var xikr: nA_per_nF {pub: in};
    var xiks: nA_per_nF {pub: in};
    var i_Stim: nA_per_nF {pub: out};
    var stim_offset: ms {init: 0};
    var stim_period: ms {init: 400};
    var stim_duration: ms {init: 3};
    var stim_amplitude: nA_per_nF {init: -15};
    var past: ms;
    past = floor(time/stim_period)*stim_period;
    i_Stim = sel
      case (time-past >= stim_offset) and (time-past <= stim_offset+stim_duration):
        stim_amplitude;
      otherwise:
        0{nA_per_nF};
    endsel;
    Itotal = -(xina+xik1+xikr+xiks+xito+xiNaCa+xica+xiNaK+i_Stim);
    ode(V, time) = Itotal;
  enddef;

  def comp INa as
    var V: mV {pub: in};
    var time: ms {pub: in};
    var ena: mV {pub: in};
    var xm: dimensionless {init: 0.001075453357};
    var xh: dimensionless {init: 0.990691306716};
    var xj: dimensionless {init: 0.993888937283};
    var gna: uS_per_nF {init: 12};
    var am: per_ms;
    var bm: per_ms;
    var ah: per_ms;
    var bh: per_ms;
    var aj: per_ms;
    var bj: per_ms;
    var xina: nA_per_nF {pub: out};
    am = sel
      case abs(V+47.13{mV}) > 0.001{mV}:
        0.32{per_ms}*1{per_mV}*(V+47.13{mV})/(1{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
      otherwise:
        3.2{per_ms};
    endsel;
    bm = 0.08{per_ms}*exp(-V/11{mV});
    ah = sel
      case V < -40{mV}:
        0.135{per_ms}*exp((80{mV}+V)/(-6.8{mV}));
      otherwise:
        0{per_ms};
    endsel;
    bh = sel
      case V < -40{mV}:
        3.56{per_ms}*exp(0.079{per_mV}*V)+310000{per_ms}*exp(0.35{per_mV}*V);
      otherwise:
        1{per_ms}/(0.13{dimensionless}*(1{dimensionless}+exp((V+10.66{mV})/(-11.1{mV}))));
    endsel;
    aj = sel
      case V < -40{mV}:
        (-127140{per_ms}*exp(0.2444{per_mV}*V)-0.00003474{per_ms}*exp(-0.04391{per_mV}*V))*1{per_mV}*(V+37.78{mV})/(1{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV})));
      otherwise:
        0{per_ms};
    endsel;
    bj = sel
      case V < -40{mV}:
        0.1212{per_ms}*exp(-0.01052{per_mV}*V)/(1{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV})));
      otherwise:
        0.3{per_ms}*exp(-0.0000002535{per_mV}*V)/(1{dimensionless}+exp(-0.1{per_mV}*(V+32{mV})));
    endsel;
    ode(xh, time) = ah*(1{dimensionless}-xh)-bh*xh;
    ode(xj, time) = aj*(1{dimensionless}-xj)-bj*xj;
    ode(xm, time) = am*(1{dimensionless}-xm)-bm*xm;
    xina = gna*xh*xj*xm*xm*xm*(V-ena);
  enddef;

  def comp ICaL as
    var V: mV {pub: in};
    var time: ms {pub: in};
    var Ca_o: mM {pub: in};
    var Ca_dyad: uM {pub: in};
    var csm: mM {pub: in};
    var wca: mV_per_uM {pub: in};
    var F: coulomb_per_mmole {pub: in};
    var FonRT: per_mV {pub: in};
    var xica: nA_per_nF {pub: out};
    var c1: dimensionless {init: 0.000018211252};
    var c2: dimensionless {init: 0.979322592773};
    var xi1ca: dimensionless {init: 0.001208153482};
    var xi1ba: dimensionless {init: 0.000033616596};
    var xi2ca: dimensionless {init: 0.004173008466};
    var xi2ba: dimensionless {init: 0.015242594688};
    var gca: mmole_per_coulomb_cm {init: 182};
    var pca: cm_per_s {init: 0.00054};
    var za: dimensionless;
    var poinf: dimensionless;
    var fca: dimensionless;
    var vth: mV {init: 0};
    var s6: mV {init: 8};
    var vx: mV {init: -40};
    var sx: mV {init: 3};
    var vy: mV {init: -40};
    var sy: mV {init: 4};
    var vyr: mV {init: -40};
    var syr: mV {init: 11.32};
    var cat: uM {init: 3};
    var cpt: uM {init: 6.09365};
    var alpha: per_ms;
    var beta: per_ms;
    var k1: per_ms;
    var k2: per_ms {init: 1.03615e-4};
    var k1t: per_ms {init: 0.00413};
    var k2t: per_ms {init: 0.00224};
    var k3: per_ms;
    var k3t: per_ms;
    var k6: per_ms;
    var k5: per_ms;
    var k6t: per_ms;
    var k5t: per_ms;
    var k4: per_ms;
    var k4t: per_ms;
    var r1: per_ms {init: 0.3};
    var r2: per_ms {init: 3};
    var s1: per_ms;
    var s1t: per_ms {init: 0.00195};
    var s2: per_ms;
    var s2t: per_ms;
    var recov: ms;
    var tca: ms {init: 78.0329};
    var tau_ca: ms;
    var tauca: ms;
    var tauba: ms;
    var taupo: ms {init: 1};
    var tau3: ms {init: 3};
    var Pr: dimensionless;
    var Ps: dimensionless;
    var poi: dimensionless;
    var po: dimensionless {pub: out};
    var rxa: mA_per_cm2 {pub: out};
    var jca: uM_per_ms {pub: out};
    za = V*2{dimensionless}*FonRT;
    rxa = sel
      case abs(za) < 0.001{dimensionless}:
        4{dimensionless}*pca*F*FonRT*(csm*exp(za)-0.341{dimensionless}*Ca_o)/(2{dimensionless}*FonRT);
      otherwise:
        4{dimensionless}*pca*V*F*FonRT*(csm*exp(za)-0.341{dimensionless}*Ca_o)/(exp(za)-1{dimensionless});
    endsel;
    poinf = 1{dimensionless}/(1{dimensionless}+exp(-(V-vth)/s6));
    alpha = poinf/taupo;
    beta = (1{dimensionless}-poinf)/taupo;
    fca = 1{dimensionless}/(1{dimensionless}+pow(cat/Ca_dyad, 3{dimensionless}));
    s1 = 0.0182688{per_ms}*fca;
    k1 = 0.024168{per_ms}*fca;
    s2 = s1*r1/r2*k2/k1;
    s2t = s1t*r1/r2*k2t/k1t;
    poi = 1{dimensionless}/(1{dimensionless}+exp(-(V-vx)/sx));
    k3 = (1{dimensionless}-poi)/tau3;
    k3t = k3;
    Pr = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp(-(V-vy)/sy));
    recov = 10{ms}+4954{ms}*exp(V/15.6{mV});
    tau_ca = tca/(1{dimensionless}+pow(Ca_dyad/cpt, 4{dimensionless}))+0.1{ms};
    tauca = (recov-tau_ca)*Pr+tau_ca;
    tauba = (recov-450{ms})*Pr+450{ms};
    Ps = 1{dimensionless}/(1{dimensionless}+exp(-(V-vyr)/syr));
    k6 = fca*Ps/tauca;
    k5 = (1{dimensionless}-Ps)/tauca;
    k6t = Ps/tauba;
    k5t = (1{dimensionless}-Ps)/tauba;
    k4 = k3*alpha/beta*k1/k2*k5/k6;
    k4t = k3t*alpha/beta*k1t/k2t*k5t/k6t;
    po = 1{dimensionless}-xi1ca-xi2ca-xi1ba-xi2ba-c1-c2;
    ode(c1, time) = alpha*c2+k2*xi1ca+k2t*xi1ba+r2*po-(beta+r1+k1t+k1)*c1;
    ode(c2, time) = beta*c1+k5*xi2ca+k5t*xi2ba-(k6+k6t+alpha)*c2;
    ode(xi1ca, time) = k1*c1+k4*xi2ca+s1*po-(k3+k2+s2)*xi1ca;
    ode(xi1ba, time) = k1t*c1+k4t*xi2ba+s1t*po-(k3t+k2t+s2t)*xi1ba;
    ode(xi2ca, time) = k3*xi1ca+k6*c2-(k5+k4)*xi2ca;
    ode(xi2ba, time) = k3t*xi1ba+k6t*c2-(k5t+k4t)*xi2ba;
    jca = gca*po*rxa;
    xica = 2{dimensionless}*wca*jca;
  enddef;

  def comp IK1 as
    var V: mV {pub: in};
    var ek: mV {pub: in};
    var K_o: mM {pub: in};
    var gkix: uS_per_nF {init: 0.3};
    var aki: per_ms;
    var bki: per_ms;
    var xkin: dimensionless;
    var xik1: nA_per_nF {pub: out};
    aki = 1.02{per_ms}/(1{dimensionless}+exp(0.2385{per_mV}*(V-ek-59.215{mV})));
    bki = (0.49124{per_ms}*exp(0.08032{per_mV}*(V-ek+5.476{mV}))+1{per_ms}*exp(0.06175{per_mV}*(V-ek-594.31{mV})))/(1{dimensionless}+exp(-0.5143{per_mV}*(V-ek+4.753{mV})));
    xkin = aki/(aki+bki);
    xik1 = gkix*sqrt(K_o/5.4{mM})*xkin*(V-ek);
  enddef;

  def comp IKr as
    var V: mV {pub: in};
    var ek: mV {pub: in};
    var time: ms {pub: in};
    var K_o: mM {pub: in};
    var xr: dimensionless {init: 0.007074239331};
    var gkr: uS_per_nF {init: 0.0125};
    var xkrv1: per_ms;
    var xkrv2: per_ms;
    var taukr: ms;
    var xkrinf: dimensionless;
    var rg: dimensionless;
    var xikr: nA_per_nF {pub: out};
    xkrv1 = sel
      case abs(V+7{mV}) > 0.001{mV}:
        0.00138{per_ms}*1{per_mV}*(V+7{mV})/(1{dimensionless}-exp(-0.123{per_mV}*(V+7{mV})));
      otherwise:
        0.00138{per_ms}/0.123{dimensionless};
    endsel;
    xkrv2 = sel
      case abs(V+10{mV}) > 0.001{mV}:
        0.00061{per_ms}*1{per_mV}*(V+10{mV})/(exp(0.145{per_mV}*(V+10{mV}))-1{dimensionless});
      otherwise:
        0.00061{per_ms}/0.145{dimensionless};
    endsel;
    taukr = 1{dimensionless}/(xkrv1+xkrv2);
    xkrinf = 1{dimensionless}/(1{dimensionless}+exp(-(V+50{mV})/7.5{mV}));
    rg = 1{dimensionless}/(1{dimensionless}+exp((V+33{mV})/22.4{mV}));
    xikr = gkr*sqrt(K_o/5.4{mM})*xr*rg*(V-ek);
    ode(xr, time) = (xkrinf-xr)/taukr;
  enddef;

  def comp IKs as
    var V: mV {pub: in};
    var Ca_i: uM {pub: in};
    var time: ms {pub: in};
    var gks: uS_per_nF {init: 0.1386};
    var xs1: dimensionless {init: 0.048267587131};
    var xs2: dimensionless {init: 0.105468807033};
    var eks: mV {pub: in};
    var xs1ss: dimensionless;
    var xs2ss: dimensionless;
    var tauxs1: ms;
    var tauxs2: ms;
    var gksx: dimensionless;
    var xiks: nA_per_nF {pub: out};
    xs1ss = 1{dimensionless}/(1{dimensionless}+exp(-(V-1.5{mV})/16.7{mV}));
    xs2ss = xs1ss;
    tauxs1 = sel
      case abs(V+30{mV}) < 0.001{mV}/0.0687{dimensionless}:
        1{ms}/(0.0000719{dimensionless}/0.148{dimensionless}+0.000131{dimensionless}/0.0687{dimensionless});
      otherwise:
        1{ms}/(0.0000719{per_mV}*(V+30{mV})/(1{dimensionless}-exp(-0.148{per_mV}*(V+30{mV})))+0.000131{per_mV}*(V+30{mV})/(exp(0.0687{per_mV}*(V+30{mV}))-1{dimensionless}));
    endsel;
    tauxs2 = 4{dimensionless}*tauxs1;
    gksx = 1{dimensionless}+0.8{dimensionless}/(1{dimensionless}+pow(0.5{uM}/Ca_i, 3{dimensionless}));
    xiks = gks*gksx*xs1*xs2*(V-eks);
    ode(xs1, time) = (xs1ss-xs1)/tauxs1;
    ode(xs2, time) = (xs2ss-xs2)/tauxs2;
  enddef;

  def comp Ito as
    var V: mV {pub: in};
    var ek: mV {pub: in};
    var time: ms {pub: in};
    var xito: nA_per_nF {pub: out};
    var xitos: nA_per_nF;
    var xitof: nA_per_nF;
    var xtos: dimensionless {init: 0.00364776906};
    var ytos: dimensionless {init: 0.174403618112};
    var xtof: dimensionless {init: 0.003643592594};
    var ytof: dimensionless {init: 0.993331326442};
    var gtos: uS_per_nF {init: 0.04};
    var gtof: uS_per_nF {init: 0.11};
    var rt1: dimensionless;
    var rt2: dimensionless;
    var rt3: dimensionless;
    var rt4: dimensionless;
    var rt5: dimensionless;
    var xtos_inf: dimensionless;
    var ytos_inf: dimensionless;
    var xtof_inf: dimensionless;
    var ytof_inf: dimensionless;
    var rs_inf: dimensionless;
    var txs: ms;
    var tys: ms;
    var txf: ms;
    var tyf: ms;
    rt1 = -(V+3{mV})/15{mV};
    rt2 = (V+33.5{mV})/10{mV};
    rt3 = (V+60{mV})/10{mV};
    rt4 = -V/30{mV}*V/30{mV};
    rt5 = (V+33.5{mV})/10{mV};
    xtos_inf = 1{dimensionless}/(1{dimensionless}+exp(rt1));
    ytos_inf = 1{dimensionless}/(1{dimensionless}+exp(rt2));
    xtof_inf = xtos_inf;
    ytof_inf = ytos_inf;
    rs_inf = 1{dimensionless}/(1{dimensionless}+exp(rt2));
    txs = 9{ms}/(1{dimensionless}+exp(-rt1))+0.5{ms};
    tys = 3000{ms}/(1{dimensionless}+exp(rt3))+30{ms};
    txf = 3.5{ms}*exp(rt4)+1.5{ms};
    tyf = 20{ms}/(1{dimensionless}+exp(rt5))+20{ms};
    ode(xtos, time) = (xtos_inf-xtos)/txs;
    ode(ytos, time) = (ytos_inf-ytos)/tys;
    ode(xtof, time) = (xtof_inf-xtof)/txf;
    ode(ytof, time) = (ytof_inf-ytof)/tyf;
    xitos = gtos*xtos*(ytos+0.5{dimensionless}*rs_inf)*(V-ek);
    xitof = gtof*xtof*ytof*(V-ek);
    xito = xitos+xitof;
  enddef;

  def comp INaK as
    var V: mV {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var K_o: mM {pub: in};
    var FonRT: per_mV {pub: in};
    var xiNaK: nA_per_nF {pub: out};
    var gNaK: nA_per_nF {init: 1.5};
    var xkmko: mM {init: 1.5};
    var xkmnai: mM {init: 12};
    var sigma: dimensionless;
    var fNaK: dimensionless;
    sigma = (exp(Na_o/67.3{mM})-1{dimensionless})/7{dimensionless};
    fNaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*FonRT)+0.0365{dimensionless}*sigma*exp(-V*FonRT));
    xiNaK = gNaK*fNaK*Na_i/(Na_i+xkmnai)*K_o/(K_o+xkmko);
  enddef;

  def comp INaCa as
    var V: mV {pub: in};
    var FonRT: per_mV {pub: in};
    var Ca_submem: uM {pub: in};
    var Ca_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var csm: mM {pub: in};
    var wca: mV_per_uM {pub: in};
    var gNaCa: uM_per_ms {init: 0.84};
    var aloss: dimensionless;
    var yz1: mM4;
    var yz2: mM4;
    var yz3: mM4;
    var yz4: mM4;
    var zw3: mM4;
    var zw4: dimensionless;
    var zw8: mM4;
    var jNaCa: uM_per_ms {pub: out};
    var xiNaCa: nA_per_nF {pub: out};
    var xkdna: uM {init: 0.3};
    var xmcao: mM {init: 1.3};
    var xmnao: mM {init: 87.5};
    var xmnai: mM {init: 12.3};
    var xmcai: mM {init: 0.0036};
    zw3 = pow(Na_i, 3{dimensionless})*Ca_o*exp(V*0.35{dimensionless}*FonRT)-pow(Na_o, 3{dimensionless})*csm*exp(V*(0.35{dimensionless}-1{dimensionless})*FonRT);
    zw4 = 1{dimensionless}+0.2{dimensionless}*exp(V*(0.35{dimensionless}-1{dimensionless})*FonRT);
    aloss = 1{dimensionless}/(1{dimensionless}+pow(xkdna/Ca_submem, 3{dimensionless}));
    yz1 = xmcao*pow(Na_i, 3{dimensionless})+pow(xmnao, 3{dimensionless})*csm;
    yz2 = pow(xmnai, 3{dimensionless})*Ca_o*(1{dimensionless}+csm/xmcai);
    yz3 = xmcai*pow(Na_o, 3{dimensionless})*(1{dimensionless}+pow(Na_i/xmnai, 3{dimensionless}));
    yz4 = pow(Na_i, 3{dimensionless})*Ca_o+pow(Na_o, 3{dimensionless})*csm;
    zw8 = yz1+yz2+yz3+yz4;
    jNaCa = gNaCa*aloss*zw3/(zw4*zw8);
    xiNaCa = wca*jNaCa;
  enddef;

  def comp Irel as
    var V: mV {pub: in};
    var time: ms {pub: in};
    var Ca_NSR: uM {pub: in};
    var dCa_JSR: uM_per_ms {pub: in};
    var po: dimensionless {pub: in};
    var rxa: mA_per_cm2 {pub: in};
    var cstar: uM {init: 90};
    var Ca_JSR: uM {init: 97.505463697266};
    var gryr: per_ms {init: 2.58079};
    var gbarsr: dimensionless {init: 26841.8};
    var gdyad: mmole_per_coulomb_cm {init: 9000};
    var ax: per_mV {init: 0.3576};
    var ay: per_mV {init: 0.05};
    var av: per_ms {init: 11.3};
    var bv: uM_per_ms;
    var Qr0: uM_per_ms;
    var Qr: uM_per_ms;
    var sparkV: dimensionless;
    var spark_rate: per_ms;
    var taua: ms {init: 100};
    var taur: ms {init: 30};
    var xirp: uM_per_ms;
    var xicap: uM_per_ms;
    var xiryr: uM_per_ms {pub: out};
    var xir: uM_per_ms {pub: out, init: 0.006679257264};
    ode(Ca_JSR, time) = (Ca_NSR-Ca_JSR)/taua;
    bv = (1{per_ms}-av)*cstar-50{uM_per_ms};
    Qr0 = sel
      case (Ca_JSR > 50{uM}) and (Ca_JSR < cstar):
        (Ca_JSR-50{uM})/1{ms};
      case Ca_JSR >= cstar:
        av*Ca_JSR+bv;
      otherwise:
        0{uM_per_ms};
    endsel;
    Qr = Ca_NSR*Qr0/cstar;
    sparkV = exp(-ay*(V+30{mV}))/(1{dimensionless}+exp(-ay*(V+30{mV})));
    spark_rate = gryr/1{mA_per_cm2}*po*abs(rxa)*sparkV;
    ode(xir, time) = spark_rate*Qr-xir*(1{dimensionless}-taur*dCa_JSR/Ca_NSR)/taur;
    xirp = po*Qr*abs(rxa)*gbarsr/1{mA_per_cm2}*exp(-ax*(V+30{mV}))/(1{dimensionless}+exp(-ax*(V+30{mV})));
    xicap = po*gdyad*abs(rxa);
    xiryr = xirp+xicap;
  enddef;

  def comp Ileak_Iup_Ixfer as
    var Ca_i: uM {pub: in};
    var Ca_NSR: uM {pub: in};
    var jup: uM_per_ms {pub: out};
    var jleak: uM_per_ms {pub: out};
    var cup: uM {init: 0.5};
    var kj: uM {init: 50};
    var vup: uM_per_ms {init: 0.4};
    var gleak: per_ms {init: 0.00002069};
    jup = vup*Ca_i*Ca_i/(Ca_i*Ca_i+cup*cup);
    jleak = gleak*Ca_NSR*Ca_NSR/(Ca_NSR*Ca_NSR+kj*kj)*(Ca_NSR*16.667{dimensionless}-Ca_i);
  enddef;

  def comp Na as
    var time: ms {pub: in};
    var wca: mV_per_uM {pub: in};
    var Na_i: mM {pub: out, init: 11.441712311614};
    var xina: nA_per_nF {pub: in};
    var xiNaK: nA_per_nF {pub: in};
    var xiNaCa: nA_per_nF {pub: in};
    ode(Na_i, time) = -(xina+3{dimensionless}*xiNaK+3{dimensionless}*xiNaCa)/(wca*1000{u_per_m});
  enddef;

  def comp Ca as
    var time: ms {pub: in};
    var xiryr: uM_per_ms {pub: in};
    var Ca_dyad: uM {pub: out, init: 1.716573130685};
    var Ca_submem: uM {pub: out, init: 0.226941113355};
    var Ca_i: uM {pub: out, init: 0.256752008084};
    var Ca_NSR: uM {pub: out, init: 104.450004990523};
    var csm: mM {pub: out};
    var bcal: uM {init: 24};
    var xkcal: uM {init: 7};
    var srmax: uM {init: 47};
    var srkd: uM {init: 0.6};
    var bmem: uM {init: 15};
    var kmem: uM {init: 0.3};
    var bsar: uM {init: 42};
    var ksar: uM {init: 13};
    var bpxs: dimensionless;
    var spxs: dimensionless;
    var mempxs: dimensionless;
    var sarpxs: dimensionless;
    var dcsib: dimensionless;
    var bpxi: dimensionless;
    var spxi: dimensionless;
    var mempxi: dimensionless;
    var sarpxi: dimensionless;
    var dciib: dimensionless;
    var xkon: per_uM_per_ms {init: 0.0327};
    var xkoff: per_ms {init: 0.0196};
    var btrop: uM {init: 70};
    var xbi: uM_per_ms;
    var xbs: uM_per_ms;
    var tropi: uM {init: 22.171689894953};
    var trops: uM {init: 19.864701949854};
    var taud: ms {init: 4};
    var taups: ms {init: 0.5};
    var jd: uM_per_ms;
    var jup: uM_per_ms {pub: in};
    var jleak: uM_per_ms {pub: in};
    var jNaCa: uM_per_ms {pub: in};
    var xir: uM_per_ms {pub: in};
    var jca: uM_per_ms {pub: in};
    var dCa_JSR: uM_per_ms {pub: out};
    bpxs = bcal*xkcal/((xkcal+Ca_submem)*(xkcal+Ca_submem));
    spxs = srmax*srkd/((srkd+Ca_submem)*(srkd+Ca_submem));
    mempxs = bmem*kmem/((kmem+Ca_submem)*(kmem+Ca_submem));
    sarpxs = bsar*ksar/((ksar+Ca_submem)*(ksar+Ca_submem));
    dcsib = 1{dimensionless}/(1{dimensionless}+bpxs+spxs+mempxs+sarpxs);
    bpxi = bcal*xkcal/((xkcal+Ca_i)*(xkcal+Ca_i));
    spxi = srmax*srkd/((srkd+Ca_i)*(srkd+Ca_i));
    mempxi = bmem*kmem/((kmem+Ca_i)*(kmem+Ca_i));
    sarpxi = bsar*ksar/((ksar+Ca_i)*(ksar+Ca_i));
    dciib = 1{dimensionless}/(1{dimensionless}+bpxi+spxi+mempxi+sarpxi);
    jd = (Ca_submem-Ca_i)/taud;
    xbi = xkon*Ca_i*(btrop-tropi)-xkoff*tropi;
    xbs = xkon*Ca_submem*(btrop-trops)-xkoff*trops;
    dCa_JSR = -xir+jup-jleak;
    ode(Ca_dyad, time) = xiryr-(Ca_dyad-Ca_submem)/taups;
    ode(Ca_submem, time) = dcsib*(50{dimensionless}*(xir-jd-jca+jNaCa)-xbs);
    ode(Ca_i, time) = dciib*(jd-jup+jleak-xbi);
    ode(Ca_NSR, time) = dCa_JSR;
    ode(tropi, time) = xbi;
    ode(trops, time) = xbs;
    csm = Ca_submem/1000{u_per_m};
  enddef;

  def comp reversal_potentials as
    var ek: mV {pub: out};
    var eks: mV {pub: out};
    var ena: mV {pub: out};
    var K_i: mM {init: 140};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var FonRT: per_mV {pub: in};
    var prNaK: dimensionless {init: 0.01833};
    ek = 1{dimensionless}/FonRT*ln(K_o/K_i);
    eks = 1{dimensionless}/FonRT*ln((K_o+prNaK*Na_o)/(K_i+prNaK*Na_i));
    ena = 1{dimensionless}/FonRT*ln(Na_o/Na_i);
  enddef;
  def map between cell and Environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and Environment for
    vars K_o and K_o;
    vars Na_o and Na_o;
    vars FonRT and FonRT;
  enddef;
  def map between INa and Environment for
    vars time and time;
  enddef;
  def map between ICaL and Environment for
    vars time and time;
    vars Ca_o and Ca_o;
    vars F and F;
    vars FonRT and FonRT;
  enddef;
  def map between IKr and Environment for
    vars time and time;
    vars K_o and K_o;
  enddef;
  def map between IKs and Environment for
    vars time and time;
  enddef;
  def map between IK1 and Environment for
    vars K_o and K_o;
  enddef;
  def map between Ito and Environment for
    vars time and time;
  enddef;
  def map between INaK and Environment for
    vars K_o and K_o;
    vars Na_o and Na_o;
    vars FonRT and FonRT;
  enddef;
  def map between INaCa and Environment for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
    vars FonRT and FonRT;
  enddef;
  def map between Irel and Environment for
    vars time and time;
  enddef;
  def map between Ca and Environment for
    vars time and time;
  enddef;
  def map between Na and Environment for
    vars time and time;
  enddef;
  def map between cell and INa for
    vars V and V;
    vars xina and xina;
  enddef;
  def map between cell and ICaL for
    vars V and V;
    vars xica and xica;
    vars wca and wca;
  enddef;
  def map between cell and IKr for
    vars V and V;
    vars xikr and xikr;
  enddef;
  def map between cell and IKs for
    vars V and V;
    vars xiks and xiks;
  enddef;
  def map between cell and Ito for
    vars V and V;
    vars xito and xito;
  enddef;
  def map between cell and IK1 for
    vars V and V;
    vars xik1 and xik1;
  enddef;
  def map between cell and INaK for
    vars V and V;
    vars xiNaK and xiNaK;
  enddef;
  def map between cell and INaCa for
    vars V and V;
    vars xiNaCa and xiNaCa;
    vars wca and wca;
  enddef;
  def map between cell and Irel for
    vars V and V;
  enddef;
  def map between cell and Na for
    vars wca and wca;
  enddef;
  def map between reversal_potentials and IK1 for
    vars ek and ek;
  enddef;
  def map between reversal_potentials and IKr for
    vars ek and ek;
  enddef;
  def map between reversal_potentials and Ito for
    vars ek and ek;
  enddef;
  def map between reversal_potentials and IKs for
    vars eks and eks;
  enddef;
  def map between reversal_potentials and INa for
    vars ena and ena;
  enddef;
  def map between reversal_potentials and Na for
    vars Na_i and Na_i;
  enddef;
  def map between INa and Na for
    vars xina and xina;
  enddef;
  def map between INaK and Na for
    vars xiNaK and xiNaK;
    vars Na_i and Na_i;
  enddef;
  def map between INaCa and Na for
    vars xiNaCa and xiNaCa;
    vars Na_i and Na_i;
  enddef;
  def map between INaCa and Ca for
    vars jNaCa and jNaCa;
    vars Ca_submem and Ca_submem;
    vars csm and csm;
  enddef;
  def map between ICaL and Ca for
    vars Ca_dyad and Ca_dyad;
    vars csm and csm;
    vars jca and jca;
  enddef;
  def map between IKs and Ca for
    vars Ca_i and Ca_i;
  enddef;
  def map between Ca and Irel for
    vars xir and xir;
    vars xiryr and xiryr;
    vars dCa_JSR and dCa_JSR;
    vars Ca_NSR and Ca_NSR;
  enddef;
  def map between Ca and Ileak_Iup_Ixfer for
    vars jup and jup;
    vars jleak and jleak;
    vars Ca_i and Ca_i;
    vars Ca_NSR and Ca_NSR;
  enddef;
  def map between ICaL and Irel for
    vars po and po;
    vars rxa and rxa;
  enddef;
enddef;
