<?xml version='1.0' encoding='utf-8'?>
<!--
This CellML file was generated on 24/06/2008 at 11:45:54 at a.m. using:

COR (0.9.31.979)
Copyright 2002-2008 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="mikane_1997" cmeta:id="mikane_1997">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Mechanism of constant contractile efficiency under cooling inotropy of myocardium: simulationy</title>
				<author>
					<firstname>Geoffrey</firstname>
					<surname>Nunns</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
        This model is known to run in both OpenCell and COR. It is an accurate match to the paper equations but it does not recreate all the published results.   
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
Abstract: We have reported that, in canine hearts, cardiac cooling to 29C enhanced left ventricular contractility but changed neither the contractile efficiency of cross-bridge (CB) cycling nor the excitation-contraction coupling energy. The mechanism of this intriguing energetics remained unknown. To get insights into this mechanism, we simulated myocardial cooling mechanoenergetics using basic Ca2+ and CB kinetics. We assumed that both adenosinetriphosphatase (ATPase)-dependent sarcoplasmic reticulum (SR) Ca2+ uptake and CB detachment decelerated with cooling. We also assumed that all the ATPase-independent SR Ca2+ release, Ca2+ binding to and dissociation from troponin, and CB attachment remained unchanged. The simulated cooling shifted the CB force-free Ca2+ concentration curve to a lower Ca2+ concentration, increasing the Ca2+ responsiveness of CB force generation, and increased the maximum Ca2+-activated force. The simulation most importantly showed that these cooling effects combined led to a constant contractile efficiency when Ca2+ uptake and CB detachment rate constants changed appropriately. This result seems to account for our experimentally observed constant contractile efficiency under cooling inotropy.    
</para>

<para>
<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="mikane_1997.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram of the Mikane et al model. The effect of calcium and troponin on cross bridge (CB) cycling is also demonstrated.</caption>
</informalfigure>
</para>

				<para>
The complete original paper reference is cited below:
</para>
				<para>
			Mechanism of constant contractile efficiency under cooling inotropy of myocardium: simulation, Takeshi Mikane, Junichi Araki, Kunihisa Kohno, Yasunori Nakayama, Shunsuke Suzuki, Juichiro Shimizu, Hiromi Matsubara, Masahisa Hirakawa, Miyako Takaki, and Hiroyuki Suga,  1997, <emphasis>American Journal of Physiology</emphasis>, 273, H2891-H2898. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=9435629 &amp;dopt=Abstract">PubMed ID: 9435629  </ulink>
				</para>
				
			</sect1>
		</article>
	</documentation>   
	
   <units name="per_second">
      <unit units="second" exponent="-1"/>
   </units>
   <units name="uM_per_kg">
      <unit units="mole" prefix="micro"/>
      <unit units="kilogram" exponent="-1"/>
   </units>
   <units name="uM_per_kg_per_second">
      <unit units="uM_per_kg"/>
      <unit units="second" exponent="-1"/>
   </units>
   <units name="kg_per_uM_per_second">
      <unit units="uM_per_kg" exponent="-1"/>
      <unit units="second" exponent="-1"/>
   </units>
   <component name="environment">
      <variable units="second" public_interface="out" name="time"/>
   </component>
   <component name="equations">
      <variable units="uM_per_kg" name="Ca_t" initial_value="0"/>
      <variable units="uM_per_kg" name="TnCa_t" initial_value="0"/>
      <variable units="uM_per_kg" name="CB_on_t" initial_value="0"/>
      <variable units="uM_per_kg" name="Ca_released" initial_value="0"/>
      <variable units="uM_per_kg" name="Ca_sequestered" initial_value="0"/>
      <variable units="uM_per_kg" name="cumCB_on_t" initial_value="0"/>
      <variable units="uM_per_kg" name="cumCB_off_t" initial_value="0"/>
      <variable units="uM_per_kg_per_second" name="Ca_release_rate"/>
      <variable units="uM_per_kg_per_second" name="dTnCa_t_dt"/>
      <variable units="second" public_interface="in" name="time"/>
      <variable units="uM_per_kg" name="Ca_tot_released" initial_value="35"/>
      <variable units="uM_per_kg" name="total_Tn" initial_value="70"/>
      <variable units="uM_per_kg" name="total_CB" initial_value="150"/>
      <variable units="kg_per_uM_per_second" name="k_1" initial_value="5e6"/>
      <variable units="per_second" name="k_2" initial_value="10"/>
      <variable units="per_second" name="k_3" initial_value="1000"/>
      <variable units="kg_per_uM_per_second" name="f" initial_value="0.4e6"/>
      <variable units="per_second" name="g" initial_value="10"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>Ca_release_rate</ci>
            <piecewise>
               <piece>
                  <cn cellml:units="uM_per_kg_per_second">0</cn>
                  <apply>
                     <gt/>
                     <ci>time</ci>
                     <cn cellml:units="second">0.1</cn>
                  </apply>
               </piece>
               <otherwise>
                  <apply>
                     <times/>
                     <cn cellml:units="per_second">20</cn>
                     <ci>Ca_tot_released</ci>
                     <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                           <times/>
                           <cn cellml:units="per_second">10</cn>
                           <ci>time</ci>
                        </apply>
                     </apply>
                  </apply>
               </otherwise>
            </piecewise>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Ca_t</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <ci>Ca_release_rate</ci>
                  <apply>
                     <times/>
                     <ci>k_3</ci>
                     <ci>Ca_t</ci>
                  </apply>
               </apply>
               <ci>dTnCa_t_dt</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>TnCa_t</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k_1</ci>
                  <ci>Ca_t</ci>
                  <apply>
                     <minus/>
                     <ci>total_Tn</ci>
                     <ci>TnCa_t</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>k_2</ci>
                  <ci>TnCa_t</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>dTnCa_t_dt</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k_1</ci>
                  <ci>Ca_t</ci>
                  <apply>
                     <minus/>
                     <ci>total_Tn</ci>
                     <ci>TnCa_t</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>k_2</ci>
                  <ci>TnCa_t</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CB_on_t</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>f</ci>
                  <ci>TnCa_t</ci>
                  <apply>
                     <minus/>
                     <ci>total_CB</ci>
                     <ci>CB_on_t</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>g</ci>
                  <ci>CB_on_t</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Ca_released</ci>
            </apply>
            <ci>Ca_release_rate</ci>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Ca_sequestered</ci>
            </apply>
            <apply>
               <times/>
               <ci>k_3</ci>
               <ci>Ca_t</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>cumCB_on_t</ci>
            </apply>
            <apply>
               <times/>
               <ci>f</ci>
               <ci>TnCa_t</ci>
               <apply>
                  <minus/>
                  <ci>total_CB</ci>
                  <ci>CB_on_t</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>cumCB_off_t</ci>
            </apply>
            <apply>
               <times/>
               <ci>g</ci>
               <ci>CB_on_t</ci>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_2="equations" component_1="environment"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#d12379b7-e79f-4dbb-82b6-30b7de77009e">
    <rdf:li rdf:resource="rdf:#9089fd40-486c-4494-bd71-71a93628e874"/>
    <rdf:li rdf:resource="rdf:#c66abad1-1cd5-4640-84ff-ed72198c17d9"/>
    <rdf:li rdf:resource="rdf:#e8641dce-096c-4d93-8f5d-65205717fcda"/>
    <rdf:li rdf:resource="rdf:#f05b70b3-9fe6-4f48-a3a1-bdd4f5789db8"/>
    <rdf:li rdf:resource="rdf:#d9955297-9d5b-46a8-b4f3-82c3016e367a"/>
    <rdf:li rdf:resource="rdf:#e5c8e238-743e-45db-980f-49e137b86d47"/>
    <rdf:li rdf:resource="rdf:#d50959b2-e083-4e71-af8c-8e3cf675639f"/>
    <rdf:li rdf:resource="rdf:#ced5fea7-ca78-4294-a4c4-5f9f5d33bcd7"/>
    <rdf:li rdf:resource="rdf:#ed7eb504-d14a-4498-a90f-9168d70351f5"/>
    <rdf:li rdf:resource="rdf:#2d218e62-8292-4768-8720-9eb6d29f2847"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#386927e7-d961-44dc-8e5a-cd55e023abb0">
    <vCard:ORG rdf:resource="rdf:#efe3c942-d380-449b-8064-a57af6bbcab1"/>
    <vCard:EMAIL rdf:resource="rdf:#3ab54f5e-564c-4037-a12a-e6206b891e34"/>
    <vCard:N rdf:resource="rdf:#5a5a3741-7189-44e8-9456-84ab302b3513"/>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher/>
    <cmeta:comment rdf:resource="rdf:#e8226603-d39f-4396-85a8-74998c1c793b"/>
    <dcterms:created rdf:resource="rdf:#f6cbb938-b04f-45f1-9356-c87384684746"/>
    <dc:creator rdf:resource="rdf:#386927e7-d961-44dc-8e5a-cd55e023abb0"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2d218e62-8292-4768-8720-9eb6d29f2847">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#b14e95f3-b6a2-46df-841c-491f7334a009"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ced5fea7-ca78-4294-a4c4-5f9f5d33bcd7">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#921c44ba-bb83-4525-b6f8-1f0e95221d76"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ae0ba9eb-94de-4343-939e-9e7ce6efb83a">
    <vCard:Given>Yasunori</vCard:Given>
    <vCard:Family>Nakayama</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d50959b2-e083-4e71-af8c-8e3cf675639f">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#f1183d2b-ca29-44e9-b6c3-0962a06aaccb"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#eb52253d-4232-4c4f-9d66-9b1a52d6f129">
    <vCard:Given>Miyako</vCard:Given>
    <vCard:Family>Takaki</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e8226603-d39f-4396-85a8-74998c1c793b">
    <dc:creator rdf:resource="rdf:#dcb9aa29-ad09-42b4-95ec-c1db0327c5cc"/>
    <rdf:value>This model is known to run in both PCEnv and COR. It is an accurate match to the paper equations, but it does not recreate all the published results.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#11830e08-e1ec-419f-83d8-dcafb56884c7">
    <bqs:Pubmed_id>9435629</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#0b3e537c-5d62-4b34-9203-74610d6e56c6"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e8641dce-096c-4d93-8f5d-65205717fcda">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#7912e04d-d2d3-481d-8233-8c771668fc3f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c66abad1-1cd5-4640-84ff-ed72198c17d9">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#7b55b0ef-cc6f-4ebc-a2da-3035df09d91b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#37981e02-8c1c-4864-ae88-bfc546b25888">
    <dc:creator rdf:resource="rdf:#ff14c766-2202-416e-8070-d3b59f6164bb"/>
    <rdf:value>This model is known to run in both PCEnv and COR. It is an accurate match to the paper equations, but it does not recreate all the published results.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ed7eb504-d14a-4498-a90f-9168d70351f5">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#eb52253d-4232-4c4f-9d66-9b1a52d6f129"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#dcb9aa29-ad09-42b4-95ec-c1db0327c5cc">
    <vCard:FN>Geoff Nunns</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3ab54f5e-564c-4037-a12a-e6206b891e34">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>gnunns1@jhem.jhu.edu</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4472d9fe-62ba-4647-b0f7-866fe17a6309">
    <vCard:Given>Shunsuke</vCard:Given>
    <vCard:Family>Suzuki</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b7249044-3e75-4bf4-ac0d-408baec82c70">
    <dcterms:W3CDTF>1997-00-00 00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#921c44ba-bb83-4525-b6f8-1f0e95221d76">
    <vCard:Given>Masahisa</vCard:Given>
    <vCard:Family>Hirakawa</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b14e95f3-b6a2-46df-841c-491f7334a009">
    <vCard:Given>Hiroyuki</vCard:Given>
    <vCard:Family>Suga</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6b3641dd-17da-49dc-9682-048f1ceb2036">
    <vCard:Given>Juichiro</vCard:Given>
    <vCard:Family>Shimuzi</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5683bc33-4547-4f39-9f6c-434077835e40">
    <vCard:Given>Takeshi</vCard:Given>
    <vCard:Family>Mikane</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="#mikane_1997">
    <bqs:reference rdf:resource="rdf:#11830e08-e1ec-419f-83d8-dcafb56884c7"/>
<bqs:reference rdf:parseType="Resource">
  <dc:subject rdf:parseType="Resource">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value>
      <rdf:Bag>
        <rdf:li>electrophysiology</rdf:li>
        <rdf:li>cardiac</rdf:li>
      </rdf:Bag>
    </rdf:value>
  </dc:subject>
</bqs:reference>
    <cmeta:comment rdf:resource="rdf:#37981e02-8c1c-4864-ae88-bfc546b25888"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f6cbb938-b04f-45f1-9356-c87384684746">
    <dcterms:W3CDTF>2008-06-20T00:00:00+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6a3b4dad-ae23-48e6-8de5-db0da676dc09">
    <dc:title>American Journal of Physiology</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ff14c766-2202-416e-8070-d3b59f6164bb">
    <vCard:FN>Geoff Nunns</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e5c8e238-743e-45db-980f-49e137b86d47">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#6b3641dd-17da-49dc-9682-048f1ceb2036"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f1183d2b-ca29-44e9-b6c3-0962a06aaccb">
    <vCard:Given>Hiromi</vCard:Given>
    <vCard:Family>Matsubara</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0b3e537c-5d62-4b34-9203-74610d6e56c6">
    <dc:creator rdf:resource="rdf:#d12379b7-e79f-4dbb-82b6-30b7de77009e"/>
    <dc:title>Mechanism of Constant Contractile Efficiency Under Cooling Intropy of Myocardium: Simulation</dc:title>
    <bqs:volume>273</bqs:volume>
    <bqs:first_page>H2891</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#6a3b4dad-ae23-48e6-8de5-db0da676dc09"/>
    <dcterms:issued rdf:resource="rdf:#b7249044-3e75-4bf4-ac0d-408baec82c70"/>
    <bqs:last_page>H2898</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#efe3c942-d380-449b-8064-a57af6bbcab1">
    <vCard:Orgname>Auckland Bioengineering Institute</vCard:Orgname>
    <vCard:Orgunit>CellML Team</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9089fd40-486c-4494-bd71-71a93628e874">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#5683bc33-4547-4f39-9f6c-434077835e40"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5a5a3741-7189-44e8-9456-84ab302b3513">
    <vCard:Given>Geoffrey</vCard:Given>
    <vCard:Family>Nunns</vCard:Family>
    <vCard:Other>Rogan</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d9955297-9d5b-46a8-b4f3-82c3016e367a">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#4472d9fe-62ba-4647-b0f7-866fe17a6309"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f05b70b3-9fe6-4f48-a3a1-bdd4f5789db8">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#ae0ba9eb-94de-4343-939e-9e7ce6efb83a"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7b55b0ef-cc6f-4ebc-a2da-3035df09d91b">
    <vCard:Given>Junichi</vCard:Given>
    <vCard:Family>Araki</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7912e04d-d2d3-481d-8233-8c771668fc3f">
    <vCard:Given>Kunihisa</vCard:Given>
    <vCard:Family>Kohno</vCard:Family>
  </rdf:Description>
</rdf:RDF>
</model>