// This CellML file was generated on 6/06/2007 at 8:55:43 at a.m. using:
//
// COR (0.9.31.489)
// Copyright 2002-2006 Oxford Cardiac Electrophysiology Group
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// title: Mouse ventricular myocyte model
// comment: FN Liren Li; This cell model was developed by Liren Li and represents the MOUSE VENTRICULAR MYOCYTE VARIANT. It reads both in PCenv and COR.
// created: W3CDTF 2007-06-07T00:00:00+00:00
// creator: liren.li@auckland.ac.nz; Given Liren; Family Li
// reference: Pubmed_id 11720973; Given Sandeep V.; Family Pandit; Given Robert.B; Family Clark; Given Wayne R.; Family Giles; Given Semahat S.; Family Demir; title A Mathematical Model of Action Potential Heterogeneity in Adult Rat Left Ventricular Myocytes; volume 81; first_page 3029; title Biophysical Journal; W3CDTF 2001-12-00 00:00; last_page 3051
// reference: subject_type keyword; electrophysiology; ventricular myocyte; cardiac; mouse
// reference: Pubmed_id 12547767; Given Sandeep V.; Family Pandit; Given Wayne R.; Family Giles; Given Semahat S.; Family Demir; title A Mathematical Model of the Electrophysiological Alterations in Rat Ventricular Myocytes in Type-I Diabetes; volume 84; first_page 832; title Biophysical Journal; W3CDTF 2003-02-00 00:00; last_page 841
// reference: Given Sandeep V.; Family Pandit; title Electrical Activity in Murine Ventricular Myocytes: Simulation Studies; title Ph.D. Thesis, University of Memphis; W3CDTF 2002-00-00 00:00
// reference: Given Joseph V.; Family Tranquillo; Given James; Family Hlavacek; Given Craig S.; Family Henriquez; title An Integrative Model of Mouse Cardiac Electrophysiology from Cell to Torso; volume 7; first_page S56; title Europace; W3CDTF 2005-07-00 00:00; last_page S70
// comment: FN Liren Li; The mouse ventricular myocyte model is a modification from the Pandit rat LV epicardial cell model. The rat LV epicardial model was first modified to match experimental recordings from rat RV cells. The RV model was then used as the control model for the development of the mouse model.
def model pandit_model_2001_mouse_ventricle as
  // Adult Mouse Ventricular Myocyte Model, 2001
  //
  // Liren Li
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This cell model was developed by Liren Li and represents the mouse ventricular myocyte. It reads both in OpenCell and COR and is able to produce action potentials under multiple stimuli.
  //
  // Model Structure
  //
  // The transgenic mouse has become an important new tool in the study of human diseases and the design of new therapies. With increasing genetic manipulations applied to the mice, it is important to characterise and understand the electrical and biophysical properties of the ionic currents expressed in the mouse heart. A computational model of the mouse action potentials, based on experimental measurements and findings, has been developed to help explore the complexities of the cardiac electrophysiology.
  //
  // The mouse ventricular myocyte model is a modification from the Pandit rat LV epicardial cell model. The rat LV epicardial model was first modified to match experimental recordings from rat RV cells. The RV model was then used as the control model for the development of the mouse model. To summarise, from the original rat LV epicardial model, the following modifications have been made:
  //
  // INa : The conductance of the sodium channel was increased by 33% compared with that for the rat LV epicardium (control model), to match experimental findings of higher expression of this channel in RV myocytes. And this higher conductance value was carried onto the mouse model.
  //
  // ICaL : The conductance of ICaL was increased by 10%, so that the influx of Ca2+ ions via ICaL (QCaL), and the APD90 value during a simulated RV action potential were comparable to corresponding experimental measurements in rat RV myocytes. And this was carried onto the mouse model.
  //
  // It : The formulation for It in the rat LV epicardial model had three gating variables. They are one activation variable (r) and two inactivation variables, i.e. fat (s) and slow (sslow) inactivation variables. But the formulation for It in the mouse model only contains one activation variable (r) and one inactivation variable (s).
  //
  // Iss : In the rat LV epicardial cells, the steady-state outward K+ current (Iss) is characterized as a rapidly activating, very slowly inactivating current. The model contains both an activation variable (rss) and an inactivation variable (sss). However, in the mouse model, the inactivation variable has been removed, and the channel is only gated by rss.
  //
  // Ikslow : This additional current arises in the mouse model as a result of experimental findings that the outward current of adult mouse ventricular myocytes have an incomplete inactivation phase characterized by a sum of a pedestal and two exponentials with a fast time constant similar to that of classic Ito and a slow time constant. It is believed that this additional current in mouse is a main factor contributing to the faster rate of repolarization seen in mouse compared to rats.
  //
  // The original paper references are cited below:
  //
  // A Mathematical Model of Action Potential Heterogeneity in Adult Rat Left Ventricular Myocytes, Sandeep V. Pandit, Robert B. Clark, Wayne R. Giles and Semahat S. Demir, 2001, Biophysical Journal, 81, 3029-3051. PubMed ID: 11720973 (http://www.ncbi.nlm.nih.gov/pubmed/11720973)
  //
  // A Mathematical Model of the Electrophysiological Alterations in Rat Ventricular Myocytes in Type-I Diabetes, Sandeep V. Pandit, Wayne R. Giles and Semahat S. Demir, 2003 Biophysical Journal, 84, 832 - 841. PubMed ID: 12547767 (http://www.ncbi.nlm.nih.gov/pubmed/12547767)
  //
  // Electrical Activity in Murine Ventricular Myocytes: Simulation Studies. Chapter 5: Ionic Basis of Cardiac Repolarization in Mouse: Quantitative Insights. Sandeep V. Pandit, Ph.D. Thesis, University of Memphis, 2003. (A summary of the model formulation can be found in Appendix C: Model Formulation of the Adult Mouse Ventricular Myocytes).
  //
  // An Integrative Model of Mouse Cardiac Electrophysiology from Cell to Torso, Joseph V. Tranquillo, James Hlavacek, Craig S. Henriquez, 2005Europace, 7,S56-S70. (This paper uses the Pandit mouse cellular model to simulate mouse cardiac electrophysiology on both cellular and torso levels). PubMed Id: 16102504 (http://www.ncbi.nlm.nih.gov/pubmed/16102504)
  //
  // fluid compartment model of the rat epicardial/endocardial ventricular cell
  //
  // A fluid compartment model of the rat epicardial/endocardial ventricular cell.
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar3_per_second as
    unit millimolar {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit millimolar4_per_second as
    unit millimolar {expo: -4};
    unit second {expo: -1};
  enddef;
  def unit millimolar_4 as
    unit millimolar {expo: -4};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb {expo: -1};
    unit mole;
  enddef;
  def unit micro_litre as
    unit litre {pref: micro};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {pub: out, init: -80.50146};
    var R: millijoule_per_mole_kelvin {pub: out, init: 8314.5};
    var T: kelvin {pub: out, init: 295};
    var F: coulomb_per_mole {pub: out, init: 96487};
    var Cm: microF {init: 0.0001};
    var time: second {pub: in};
    var i_Na: nanoA {pub: in};
    var i_Ca_L: nanoA {pub: in};
    var i_t: nanoA {pub: in};
    var i_ss: nanoA {pub: in};
    var i_f: nanoA {pub: in};
    var i_K1: nanoA {pub: in};
    var i_B: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_Ca_P: nanoA {pub: in};
    var i_Stim: nanoA;
    var i_K_slow: nanoA {pub: in};
    var stim_period: second {init: 1};
    var stim_duration: second {init: 5e-3};
    var stim_amplitude: nanoA {init: -0.6};
    i_Stim = sel
      case (time-floor(time/stim_period)*stim_period >= 0{second}) and (time-floor(time/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{nanoA};
    endsel;
    ode(V, time) = -(i_Na+i_Ca_L+i_t+i_ss+i_K_slow+i_f+i_K1+i_B+i_NaK+i_NaCa+i_Ca_P+i_Stim)/Cm;
  enddef;

  def comp sodium_current as
    var i_Na: nanoA {pub: out};
    var E_Na: millivolt {pub: out};
    var g_Na: microS {init: 1.064};
    var g_Na_endo: microS;
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    g_Na_endo = 1.33{dimensionless}*g_Na;
    E_Na = R*T/F*ln(Na_o/Na_i);
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp sodium_current_m_gate as
    var m: dimensionless {pub: out, init: 0.004164108};
    var m_infinity: dimensionless;
    var tau_m: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    m_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+45{millivolt})/(-6.5{millivolt})));
    tau_m = 0.00136{second}/(0.32{per_millivolt}*(V+47.13{millivolt})/(1{dimensionless}-exp(-0.1{dimensionless}*(V+47.13{millivolt})))+0.08{dimensionless}*exp(-V/11{millivolt}));
    ode(m, time) = (m_infinity-m)/tau_m;
  enddef;

  def comp sodium_current_h_gate as
    var h: dimensionless {pub: out, init: 0.6735613};
    var h_infinity: dimensionless;
    var tau_h: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    h_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+76.1{millivolt})/6.07{millivolt}));
    tau_h = sel
      case V >= -40{millivolt}:
        0.0004537{second}*(1{dimensionless}+exp(-(V+10.66{millivolt})/11.1{millivolt}));
      otherwise:
        0.00349{second}/(0.135{dimensionless}*exp(-(V+80{millivolt})/6.8{millivolt})+3.56{dimensionless}*exp(0.079{dimensionless}*V)+310000{dimensionless}*exp(0.35{dimensionless}*V));
    endsel;
    ode(h, time) = (h_infinity-h)/tau_h;
  enddef;

  def comp sodium_current_j_gate as
    var j: dimensionless {pub: out, init: 0.6729362};
    var j_infinity: dimensionless;
    var tau_j: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    j_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+76.1{millivolt})/6.07{millivolt}));
    tau_j = sel
      case V >= -40{millivolt}:
        0.01163{second}*(1{dimensionless}+exp(-0.1{dimensionless}*(V+32{millivolt})))/exp(-0.0000002535{dimensionless}*V);
      otherwise:
        0.00349{second}/((V+37.78{millivolt})/(1{dimensionless}+exp(0.311{dimensionless}*(V+79.23{millivolt})))*(-127140{dimensionless}*exp(0.2444{dimensionless}*V)-0.00003474{dimensionless}*exp(-0.04391{dimensionless}*V))+0.1212{dimensionless}*exp(-0.01052{dimensionless}*V)/(1{dimensionless}+exp(-0.1378{dimensionless}*(V+40.14{millivolt}))));
    endsel;
    ode(j, time) = (j_infinity-j)/tau_j;
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L: nanoA {pub: out};
    var g_Ca_L: microS {init: 0.0341};
    var E_Ca_L: millivolt {init: 65};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ca_ss: millimolar {pub: in, priv: out};
    var d: dimensionless {priv: in};
    var f_11: dimensionless {priv: in};
    var f_12: dimensionless {priv: in};
    var Ca_inact: dimensionless {priv: in};
    i_Ca_L = g_Ca_L*d*((0.9{dimensionless}+Ca_inact/10{dimensionless})*f_11+(0.1{dimensionless}-Ca_inact/10{dimensionless})*f_12)*(V-E_Ca_L);
  enddef;

  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {pub: out, init: 0.000002171081};
    var d_infinity: dimensionless;
    var tau_d: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    d_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+15.3{millivolt})/(-5{millivolt})));
    tau_d = 0.00305{second}*exp(-0.0045{dimensionless}*sqr(V+7{millivolt}))+0.00105{second}*exp(-0.002{dimensionless}*sqr(V-18{millivolt}))+0.00025{second};
    ode(d, time) = (d_infinity-d)/tau_d;
  enddef;

  def comp L_type_Ca_channel_f_11_gate as
    var f_11: dimensionless {pub: out, init: 0.9999529};
    var f_11_infinity: dimensionless;
    var tau_f_11: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    f_11_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+26.7{millivolt})/5.4{millivolt}));
    tau_f_11 = 0.105{second}*exp(-sqr((V+45{millivolt})/12{millivolt}))+0.04{second}/(1{dimensionless}+exp((-V+25{millivolt})/25{millivolt}))+0.015{second}/(1{dimensionless}+exp((V+75{millivolt})/25{millivolt}))+0.0017{second};
    ode(f_11, time) = (f_11_infinity-f_11)/tau_f_11;
  enddef;

  def comp L_type_Ca_channel_f_12_gate as
    var f_12: dimensionless {pub: out, init: 0.9999529};
    var f_12_infinity: dimensionless;
    var tau_f_12: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    f_12_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+26.7{millivolt})/5.4{millivolt}));
    tau_f_12 = 0.041{second}*exp(-sqr((V+47{millivolt})/12{millivolt}))+0.08{second}/(1{dimensionless}+exp((V+55{millivolt})/(-5{millivolt})))+0.015{second}/(1{dimensionless}+exp((V+75{millivolt})/25{millivolt}))+0.0017{second};
    ode(f_12, time) = (f_12_infinity-f_12)/tau_f_12;
  enddef;

  def comp L_type_Ca_channel_Ca_inact_gate as
    var Ca_inact: dimensionless {pub: out, init: 0.9913102};
    var tau_Ca_inact: second {init: 0.009};
    var Ca_inact_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var Ca_ss: millimolar {pub: in};
    Ca_inact_infinity = 1{dimensionless}/(1{dimensionless}+Ca_ss/0.01{millimolar});
    ode(Ca_inact, time) = (Ca_inact_infinity-Ca_inact)/tau_Ca_inact;
  enddef;

  def comp Ca_independent_transient_outward_K_current as
    var i_t: nanoA {pub: out};
    var E_K: millivolt {pub: out};
    var g_t: microS {init: 0.033};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var r: dimensionless {priv: in};
    var s: dimensionless {priv: in};
    E_K = R*T/F*ln(K_o/K_i);
    i_t = g_t*r*s*(V-E_K);
  enddef;

  def comp Ca_independent_transient_outward_K_current_r_gate as
    var r: dimensionless {pub: out, init: 0.002191519};
    var tau_r: second;
    var r_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+12.5{millivolt})/(-7.7{millivolt})));
    tau_r = 1{second}/(45.16{dimensionless}*exp(0.03577{dimensionless}*(V+50{millivolt}))+98.9{dimensionless}*exp(-0.1{dimensionless}*(V+38{millivolt})));
    ode(r, time) = (r_infinity-r)/tau_r;
  enddef;

  def comp Ca_independent_transient_outward_K_current_s_gate as
    var s: dimensionless {pub: out, init: 0.9842542};
    var tau_s: second;
    var s_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    s_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+24.8{millivolt})/3.5{millivolt}));
    tau_s = 0.0572{second};
    ode(s, time) = (s_infinity-s)/tau_s;
  enddef;

  def comp steady_state_outward_K_current as
    var i_ss: nanoA {pub: out};
    var g_ss: microS {init: 0.005};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var r_ss: dimensionless {priv: in};
    i_ss = g_ss*r_ss*(V-E_K);
  enddef;

  def comp steady_state_outward_K_current_r_ss_gate as
    var r_ss: dimensionless {pub: out, init: 0.002907171};
    var tau_r_ss: second;
    var r_ss_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    r_ss_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+12.5{millivolt})/(-7.7{millivolt})));
    tau_r_ss = 3{second}/(45.16{dimensionless}*exp(0.03577{dimensionless}*(V+50{millivolt}))+98.9{dimensionless}*exp(-0.1{dimensionless}*(V+38{millivolt})));
    ode(r_ss, time) = (r_ss_infinity-r_ss)/tau_r_ss;
  enddef;

  def comp slowly_inactivating_delayed_rectifier_K_current as
    var i_K_slow: nanoA {pub: out};
    var g_K_slow: microS {init: 0.014};
    var r_K_slow: dimensionless {priv: in};
    var s_K_slow: dimensionless {priv: in};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var time: second {pub: in, priv: out};
    i_K_slow = g_K_slow*r_K_slow*s_K_slow*(V-E_K);
  enddef;

  def comp slowly_inactivating_delayed_rectifier_K_current_r_K_slow_gate as
    var r_K_slow: dimensionless {pub: out, init: 0.642};
    var tau_r_K_slow: second;
    var r_K_slow_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    r_K_slow_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+12.5{millivolt})/(-7.7{millivolt})));
    tau_r_K_slow = 1{second}/(45.16{dimensionless}*exp(0.03577{dimensionless}*(V+50{millivolt}))+98.9{dimensionless}*exp(-0.1{dimensionless}*(V+38{millivolt})));
    ode(r_K_slow, time) = (r_K_slow_infinity-r_K_slow)/tau_r_K_slow;
  enddef;

  def comp slowly_inactivating_delayed_rectifier_K_current_s_K_slow_gate as
    var s_K_slow: dimensionless {pub: out, init: 0.314};
    var tau_s_K_slow: second;
    var s_K_slow_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    s_K_slow_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+37.6{millivolt})/5.9{millivolt}));
    tau_s_K_slow = 1.174{second};
    ode(s_K_slow, time) = (s_K_slow_infinity-s_K_slow)/tau_s_K_slow;
  enddef;

  def comp inward_rectifier as
    var i_K1: nanoA {pub: out};
    var g_K1: microS {init: 0.024};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    i_K1 = (48{nanoA}/(exp((V+37{millivolt})/25{millivolt})+exp((V+37{millivolt})/(-25{millivolt})))+10{nanoA})*0.001{dimensionless}/(1{dimensionless}+exp((V-(E_K+76.77{millivolt}))/(-17{millivolt})))+g_K1*(V-(E_K+1.73{millivolt}))/((1{dimensionless}+exp(1.613{dimensionless}*F*(V-(E_K+1.73{millivolt}))/(R*T)))*(1{dimensionless}+exp((K_o-0.9988{dimensionless})/(-0.124{dimensionless}))));
  enddef;

  def comp hyperpolarisation_activated_current as
    var i_f: nanoA {pub: out};
    var i_f_Na: nanoA {pub: out};
    var i_f_K: nanoA {pub: out};
    var g_f: microS {init: 0.00145};
    var f_Na: dimensionless {init: 0.2};
    var f_K: dimensionless;
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    var y: dimensionless {priv: in};
    f_K = 1{dimensionless}-f_Na;
    i_f_Na = g_f*y*f_Na*(V-E_Na);
    i_f_K = g_f*y*f_K*(V-E_K);
    i_f = i_f_Na+i_f_K;
  enddef;

  def comp hyperpolarisation_activated_current_y_gate as
    var y: dimensionless {pub: out, init: 0.003578708};
    var tau_y: second;
    var y_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    y_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+138.6{millivolt})/10.48{millivolt}));
    tau_y = 1{second}/(0.11885{dimensionless}*exp((V+80{millivolt})/28.37{millivolt})+0.5623{dimensionless}*exp((V+80{millivolt})/(-14.19{millivolt})));
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  def comp background_currents as
    var i_B: nanoA {pub: out};
    var i_B_Na: nanoA {pub: out};
    var i_B_Ca: nanoA {pub: out};
    var i_B_K: nanoA {pub: out};
    var g_B_Na: microS {init: 0.00008015};
    var g_B_Ca: microS {init: 0.0000324};
    var g_B_K: microS {init: 0.000138};
    var E_Ca: millivolt {init: 65};
    var E_Na: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_B_Na = g_B_Na*(V-E_Na);
    i_B_Ca = g_B_Ca*(V-E_Ca);
    i_B_K = g_B_K*(V-E_K);
    i_B = i_B_Na+i_B_Ca+i_B_K;
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: nanoA {pub: out};
    var i_NaK_max: nanoA {init: 0.08};
    var K_m_K: millimolar {init: 1.5};
    var K_m_Na: millimolar {init: 10};
    var sigma: dimensionless;
    var K_o: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    sigma = (exp(Na_o/67.3{millimolar})-1{dimensionless})/7{dimensionless};
    i_NaK = i_NaK_max*1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)))*K_o/(K_o+K_m_K)*1{dimensionless}/(1{dimensionless}+pow(K_m_Na/Na_i, 1.5{dimensionless}));
  enddef;

  def comp sarcolemmal_calcium_pump_current as
    var i_Ca_P: nanoA {pub: out};
    var i_Ca_P_max: nanoA {init: 0.004};
    var Ca_i: millimolar {pub: in};
    var time: second {pub: in};
    i_Ca_P = i_Ca_P_max*Ca_i/(Ca_i+0.0004{millimolar});
  enddef;

  def comp Na_Ca_ion_exchanger_current as
    var i_NaCa: nanoA {pub: out};
    var K_NaCa: millimolar_4 {init: 0.000009984};
    var d_NaCa: millimolar_4 {init: 0.0001};
    var gamma_NaCa: dimensionless {init: 0.5};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_NaCa = K_NaCa*(pow(Na_i, 3{dimensionless})*Ca_o*exp(0.03743{dimensionless}*V*gamma_NaCa)-pow(Na_o, 3{dimensionless})*Ca_i*exp(0.03743{dimensionless}*V*(gamma_NaCa-1{dimensionless})))/(1{dimensionless}+d_NaCa*(Ca_i*pow(Na_o, 3{dimensionless})+Ca_o*pow(Na_i, 3{dimensionless})));
  enddef;

  def comp SR_Ca_release_channel as
    var J_rel: millimolar_per_second {pub: out};
    var v1: per_second {init: 1.8e3};
    var k_a_plus: millimolar4_per_second {init: 12.15e12};
    var k_a_minus: per_second {init: 576};
    var k_b_plus: millimolar3_per_second {init: 4.05e9};
    var k_b_minus: per_second {init: 1930};
    var k_c_plus: per_second {init: 100};
    var k_c_minus: per_second {init: 0.8};
    var P_O1: dimensionless {init: 0.0004327548};
    var P_O2: dimensionless {init: 0.000000000606254};
    var P_C1: dimensionless {init: 0.6348229};
    var P_C2: dimensionless {init: 0.3647471};
    var n: dimensionless {init: 4};
    var m: dimensionless {init: 3};
    var time: second {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Ca_JSR: millimolar {pub: in};
    ode(P_C1, time) = -k_a_plus*pow(Ca_ss, n)*P_C1+k_a_minus*P_O1;
    ode(P_O1, time) = k_a_plus*pow(Ca_ss, n)*P_C1-(k_a_minus*P_O1+k_b_plus*pow(Ca_ss, m)*P_O1+k_c_plus*P_O1)+k_b_minus*P_O2+k_c_minus*P_C2;
    ode(P_O2, time) = k_b_plus*pow(Ca_ss, m)*P_O1-k_b_minus*P_O2;
    ode(P_C2, time) = k_c_plus*P_O1-k_c_minus*P_C2;
    J_rel = v1*(P_O1+P_O2)*(Ca_JSR-Ca_ss);
  enddef;

  def comp SERCA2a_pump as
    var J_up: millimolar_per_second {pub: out};
    var K_fb: millimolar {init: 0.000168};
    var K_rb: millimolar {init: 3.29};
    var fb: dimensionless;
    var rb: dimensionless;
    var Vmaxf: millimolar_per_second {init: 0.04};
    var Vmaxr: millimolar_per_second {init: 0.9};
    var K_SR: dimensionless {init: 1};
    var N_fb: dimensionless {init: 1.2};
    var N_rb: dimensionless {init: 1};
    var time: second {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_NSR: millimolar {pub: in};
    fb = pow(Ca_i/K_fb, N_fb);
    rb = pow(Ca_NSR/K_rb, N_rb);
    J_up = K_SR*(Vmaxf*fb-Vmaxr*rb)/(1{dimensionless}+fb+rb);
  enddef;

  def comp intracellular_and_SR_Ca_fluxes as
    var J_tr: millimolar_per_second {pub: out};
    var J_xfer: millimolar_per_second {pub: out};
    var J_trpn: millimolar_per_second {pub: out};
    var tau_tr: second {init: 0.0005747};
    var tau_xfer: second {init: 0.0267};
    var HTRPNCa: millimolar {init: 1.394301e-1};
    var LTRPNCa: millimolar {init: 5.1619e-3};
    var J_HTRPNCa: millimolar_per_second;
    var J_LTRPNCa: millimolar_per_second;
    var HTRPN_tot: millimolar {init: 0.14};
    var LTRPN_tot: millimolar {init: 0.07};
    var k_htrpn_plus: millimolar_per_second {init: 200000};
    var k_htrpn_minus: per_second {init: 0.066};
    var k_ltrpn_plus: millimolar_per_second {init: 40000};
    var k_ltrpn_minus: per_second {init: 40};
    var time: second {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_NSR: millimolar {pub: in};
    var Ca_JSR: millimolar {pub: in};
    J_tr = (Ca_NSR-Ca_JSR)/tau_tr;
    J_xfer = (Ca_ss-Ca_i)/tau_xfer;
    J_HTRPNCa = k_htrpn_plus*Ca_i*(HTRPN_tot-HTRPNCa)-k_htrpn_minus*HTRPNCa;
    ode(HTRPNCa, time) = J_HTRPNCa;
    ode(LTRPNCa, time) = J_LTRPNCa;
    J_LTRPNCa = k_ltrpn_plus*Ca_i*(LTRPN_tot-LTRPNCa)-k_ltrpn_minus*LTRPNCa;
    J_trpn = J_HTRPNCa+J_LTRPNCa;
  enddef;

  def comp intracellular_ion_concentrations as
    var Na_i: millimolar {pub: out, init: 10.73519};
    var Ca_i: millimolar {pub: out, init: 0.00007901351};
    var K_i: millimolar {pub: out, init: 139.2751};
    var Ca_ss: millimolar {pub: out, init: 0.00008737212};
    var Ca_JSR: millimolar {pub: out, init: 0.06607948};
    var Ca_NSR: millimolar {pub: out, init: 0.06600742};
    var V_myo: micro_litre {init: 0.00000936};
    var V_JSR: micro_litre {init: 0.000000056};
    var V_NSR: micro_litre {init: 0.000000504};
    var V_SS: micro_litre {init: 0.0000000012};
    var K_mCMDN: millimolar {init: 0.00238};
    var K_mCSQN: millimolar {init: 0.8};
    var K_mEGTA: millimolar {init: 0.00015};
    var CMDN_tot: millimolar {init: 0.05};
    var CSQN_tot: millimolar {init: 15};
    var EGTA_tot: millimolar {init: 0};
    var beta_i: millimolar;
    var beta_SS: millimolar;
    var beta_JSR: millimolar;
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: nanoA {pub: in};
    var i_Ca_L: nanoA {pub: in};
    var i_B_Na: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_f_Na: nanoA {pub: in};
    var i_f_K: nanoA {pub: in};
    var i_B_K: nanoA {pub: in};
    var i_K1: nanoA {pub: in};
    var i_t: nanoA {pub: in};
    var i_K_slow: nanoA {pub: in};
    var i_ss: nanoA {pub: in};
    var i_Ca_P: nanoA {pub: in};
    var i_B_Ca: nanoA {pub: in};
    var J_up: millimolar_per_second {pub: in};
    var J_rel: millimolar_per_second {pub: in};
    var J_xfer: millimolar_per_second {pub: in};
    var J_trpn: millimolar_per_second {pub: in};
    var J_tr: millimolar_per_second {pub: in};
    beta_i = 1{dimensionless}/(1{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Ca_i)+EGTA_tot*K_mEGTA/sqr(K_mEGTA+Ca_i));
    beta_SS = 1{dimensionless}/(1{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Ca_ss));
    beta_JSR = 1{dimensionless}/(1{dimensionless}+CSQN_tot*K_mCSQN/sqr(K_mCSQN+Ca_JSR));
    ode(Ca_i, time) = beta_i*(J_xfer-(J_up+J_trpn+(i_B_Ca-2{dimensionless}*i_NaCa+i_Ca_P)*1{dimensionless}/(2{dimensionless}*V_myo*F)));
    ode(Na_i, time) = -(i_Na+i_B_Na+i_NaCa*3{dimensionless}+i_NaK*3{dimensionless}+i_f_Na)*1{dimensionless}/(V_myo*F);
    ode(K_i, time) = -(i_ss+i_B_K+i_t+i_K_slow+i_K1+i_f_K+i_NaK*(-2{dimensionless}))*1{dimensionless}/(V_myo*F);
    ode(Ca_ss, time) = beta_SS*(J_rel*V_JSR/V_SS-J_xfer*V_myo/V_SS-i_Ca_L*1{dimensionless}/(2{dimensionless}*V_SS*F));
    ode(Ca_JSR, time) = beta_JSR*(J_tr-J_rel);
    ode(Ca_NSR, time) = J_up*V_myo/V_NSR-J_tr*V_JSR/V_NSR;
  enddef;

  def comp standard_ionic_concentrations as
    var Na_o: millimolar {pub: out, init: 140};
    var Ca_o: millimolar {pub: out, init: 1.2};
    var K_o: millimolar {pub: out, init: 5.4};
  enddef;

  def group as encapsulation for
    comp sodium_current incl
      comp sodium_current_m_gate;
      comp sodium_current_h_gate;
      comp sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_11_gate;
      comp L_type_Ca_channel_f_12_gate;
      comp L_type_Ca_channel_Ca_inact_gate;
    endcomp;
    comp Ca_independent_transient_outward_K_current incl
      comp Ca_independent_transient_outward_K_current_r_gate;
      comp Ca_independent_transient_outward_K_current_s_gate;
    endcomp;
    comp slowly_inactivating_delayed_rectifier_K_current incl
      comp slowly_inactivating_delayed_rectifier_K_current_r_K_slow_gate;
      comp slowly_inactivating_delayed_rectifier_K_current_s_K_slow_gate;
    endcomp;
    comp steady_state_outward_K_current incl
      comp steady_state_outward_K_current_r_ss_gate;
    endcomp;
    comp hyperpolarisation_activated_current incl
      comp hyperpolarisation_activated_current_y_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between Ca_independent_transient_outward_K_current and environment for
    vars time and time;
  enddef;
  def map between steady_state_outward_K_current and environment for
    vars time and time;
  enddef;
  def map between slowly_inactivating_delayed_rectifier_K_current and environment for
    vars time and time;
  enddef;
  def map between inward_rectifier and environment for
    vars time and time;
  enddef;
  def map between hyperpolarisation_activated_current and environment for
    vars time and time;
  enddef;
  def map between background_currents and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_ion_exchanger_current and environment for
    vars time and time;
  enddef;
  def map between SR_Ca_release_channel and environment for
    vars time and time;
  enddef;
  def map between SERCA2a_pump and environment for
    vars time and time;
  enddef;
  def map between intracellular_and_SR_Ca_fluxes and environment for
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between membrane and sodium_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between membrane and Ca_independent_transient_outward_K_current for
    vars V and V;
    vars i_t and i_t;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and steady_state_outward_K_current for
    vars V and V;
    vars i_ss and i_ss;
  enddef;
  def map between membrane and slowly_inactivating_delayed_rectifier_K_current for
    vars V and V;
    vars i_K_slow and i_K_slow;
  enddef;
  def map between membrane and inward_rectifier for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and hyperpolarisation_activated_current for
    vars V and V;
    vars i_f and i_f;
  enddef;
  def map between membrane and background_currents for
    vars V and V;
    vars i_B and i_B;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump_current for
    vars i_Ca_P and i_Ca_P;
  enddef;
  def map between membrane and Na_Ca_ion_exchanger_current for
    vars V and V;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between membrane and intracellular_ion_concentrations for
    vars F and F;
  enddef;
  def map between sodium_current and intracellular_ion_concentrations for
    vars i_Na and i_Na;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_current and background_currents for
    vars E_Na and E_Na;
  enddef;
  def map between sodium_current and hyperpolarisation_activated_current for
    vars E_Na and E_Na;
  enddef;
  def map between sodium_current and standard_ionic_concentrations for
    vars Na_o and Na_o;
  enddef;
  def map between background_currents and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between L_type_Ca_channel and intracellular_ion_concentrations for
    vars i_Ca_L and i_Ca_L;
    vars Ca_ss and Ca_ss;
  enddef;
  def map between Ca_independent_transient_outward_K_current and intracellular_ion_concentrations for
    vars i_t and i_t;
    vars K_i and K_i;
  enddef;
  def map between Ca_independent_transient_outward_K_current and steady_state_outward_K_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and slowly_inactivating_delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and inward_rectifier for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and hyperpolarisation_activated_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and background_currents for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and standard_ionic_concentrations for
    vars K_o and K_o;
  enddef;
  def map between steady_state_outward_K_current and intracellular_ion_concentrations for
    vars i_ss and i_ss;
  enddef;
  def map between slowly_inactivating_delayed_rectifier_K_current and intracellular_ion_concentrations for
    vars i_K_slow and i_K_slow;
  enddef;
  def map between inward_rectifier and intracellular_ion_concentrations for
    vars i_K1 and i_K1;
    vars K_i and K_i;
  enddef;
  def map between inward_rectifier and standard_ionic_concentrations for
    vars K_o and K_o;
  enddef;
  def map between hyperpolarisation_activated_current and intracellular_ion_concentrations for
    vars i_f_Na and i_f_Na;
    vars i_f_K and i_f_K;
  enddef;
  def map between background_currents and intracellular_ion_concentrations for
    vars i_B_Na and i_B_Na;
    vars i_B_K and i_B_K;
    vars i_B_Ca and i_B_Ca;
    vars Ca_i and Ca_i;
  enddef;
  def map between sodium_potassium_pump and intracellular_ion_concentrations for
    vars i_NaK and i_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_potassium_pump and standard_ionic_concentrations for
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between sarcolemmal_calcium_pump_current and intracellular_ion_concentrations for
    vars i_Ca_P and i_Ca_P;
    vars Ca_i and Ca_i;
  enddef;
  def map between Na_Ca_ion_exchanger_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_ion_exchanger_current and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between SR_Ca_release_channel and intracellular_ion_concentrations for
    vars J_rel and J_rel;
    vars Ca_ss and Ca_ss;
    vars Ca_JSR and Ca_JSR;
  enddef;
  def map between SERCA2a_pump and intracellular_ion_concentrations for
    vars J_up and J_up;
    vars Ca_i and Ca_i;
    vars Ca_NSR and Ca_NSR;
  enddef;
  def map between intracellular_and_SR_Ca_fluxes and intracellular_ion_concentrations for
    vars J_tr and J_tr;
    vars J_xfer and J_xfer;
    vars J_trpn and J_trpn;
    vars Ca_i and Ca_i;
    vars Ca_NSR and Ca_NSR;
    vars Ca_ss and Ca_ss;
    vars Ca_JSR and Ca_JSR;
  enddef;
  def map between sodium_current and sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_11_gate for
    vars f_11 and f_11;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_12_gate for
    vars f_12 and f_12;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_Ca_inact_gate for
    vars Ca_inact and Ca_inact;
    vars time and time;
    vars V and V;
    vars Ca_ss and Ca_ss;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between slowly_inactivating_delayed_rectifier_K_current and slowly_inactivating_delayed_rectifier_K_current_r_K_slow_gate for
    vars r_K_slow and r_K_slow;
    vars time and time;
    vars V and V;
  enddef;
  def map between slowly_inactivating_delayed_rectifier_K_current and slowly_inactivating_delayed_rectifier_K_current_s_K_slow_gate for
    vars s_K_slow and s_K_slow;
    vars time and time;
    vars V and V;
  enddef;
  def map between steady_state_outward_K_current and steady_state_outward_K_current_r_ss_gate for
    vars r_ss and r_ss;
    vars time and time;
    vars V and V;
  enddef;
  def map between hyperpolarisation_activated_current and hyperpolarisation_activated_current_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
enddef;
