// This CellML file was generated on 19/02/2009 at 09:18:22 using:
//
// COR (0.9.31.1175)
// Copyright 2002-2009 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// modification: W3CDTF 2009-02-09T14:57:12+13:00; Recoded the entire model according to the Matlab to CellML automated conversion. Added structure and units.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2009-02-19T13:16:03+13:00; Changed some initial conditions according to the new Matlab code supplied by the model authors to describe a model which stabilises at 5Hz as opposed to at 1Hz.; Given Catherine; Family Lloyd; Other May
// title: CellML 1.0 version of the model which stabilises at 5Hz
// comment: This CellML model is known to run in both COR and PCEnv to recreate the published results. The units have been checked and they are consistent. This particular version of the CellML model was translated from the author's original Matlab code. It is a second variant of the published model which stabilises at 5Hz (the first stabilised at 1Hz). The only difference between these two variants are that some of the initial conditions vary. Please note that this model is relatively stiff. If you run the model using the default COR settings, you will get a message that reads: "Problem with the CVODE integrator: at t=0.00170178, mxstep steps taken before reaching tout." This basically means that you have to increase the maximum number of steps which is, by default, set to 500. Such a value is sufficient for most ODE problems, but not for ODE problems that have very stiff ODEs, such as the current model. Anyway, you will see that the model runs fine if you increase the value to something like 5000. Note that you also need to set the maximum time step to a sensible value, i.e. the duration of the stimulus which is here 1 ms. Regarding PCEnv, it uses a higher value than COR for the maximum number of steps, which is why the model will run in PCEnv without having to change this particular setting. Otherwise, like in COR there is a need to set the maximum time step to a sensible value. PCEnv uses a default value of 1 s for the Pasek model, which is clearly not small enough as can be seen when running the model for 10 s. If one uses 0.001 s, then everything is fine.; FN Catherine Lloyd
// creator: c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2008-11-26T00:00:00+00:00
// reference: subject_type keyword; _1 electrophysiology; _2 cardiac; _3 rat; _4 t-tubules; _5 ventricular myocyte
// reference: title The functional role of cardiac T-tubules explored in a model of rat ventricular myocytes; Given Michal; Family Pasek; Given Jiri; Family Simurda; Given Georges; Family Christe; title Philosophical Transactions of the Royal Society; volume 81; W3CDTF 2006-00-00 00:00; first_page 3029; last_page 3051; Pubmed_id 16608703
// simulation: endingValue 0.01; maximumStepSize 0.001
def model pasek_simurda_christe_2006 as
  // The functional role of cardiac T-tubules explored in a model of rat ventricular myocytes
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model is known to run in both COR and PCEnv to recreate the published results. The units have been checked and they are consistent. This particular version of the CellML model was translated from the author's original Matlab code. It is a second variant of the published model which stabilises at 5Hz (the first stabilised at 1Hz). The only difference between these two variants are that some of the initial conditions vary.
  //
  // Please note that this model is relatively stiff. If you run the model using the default COR settings, you will get a message that reads: "Problem with the CVODE integrator: at t=0.00170178, mxstep steps taken before reaching tout." This basically means that you have to increase the maximum number of steps which is, by default, set to 500. Such a value is sufficient for most ODE problems, but not for ODE problems that have very stiff ODEs, such as the current model. Anyway, you will see that the model runs fine if you increase the value to something like 5000. Note that you also need to set the maximum time step to a sensible value, i.e. the duration of the stimulus which is here 1 ms.
  //
  // Regarding PCEnv, it uses a higher value than COR for the maximum number of steps, which is why the model will run in PCEnv without having to change this particular setting. Otherwise, like in COR there is a need to set the maximum time step to a sensible value. PCEnv uses a default value of 1 s for the Pasek model, which is clearly not small enough as can be seen when running the model for 10 s. If one uses 0.001 s, then everything is fine.
  //
  // Model Structure
  //
  // ABSTRACT: The morphology of the cardiac transverse-axial tubular system (TATS) has been known for decades, but its function has received little attention. To explore the possible role of this system in the physiological modulation of electrical and contractile activity, we have developed a mathematical model of rat ventricular cardiomyocytes in which the TATS is described as a single compartment. The geometrical characteristics of the TATS, the biophysical characteristics of ion transporters and their distribution between surface and tubular membranes were based on available experimental data. Biophysically realistic values of mean access resistance to the tubular lumen and time constants for ion exchange with the bulk extracellular solution were included. The fraction of membrane in the TATS was set to 56%. The action potentials initiated in current-clamp mode are accompanied by transient K+ accumulation and transient Ca2+ depletion in the TATS lumen. The amplitude of these changes relative to external ion concentrations was studied at steady-state stimulation frequencies of 1-5Hz. Ca2+ depletion increased from 7 to 13.1% with stimulation frequency, while K+ accumulation decreased from 4.1 to 2.7%. These ionic changes (particularly Ca2+ depletion) implicated significant decrease of intracellular Ca2+ load at frequencies natural for rat heart.
  //
  // The original paper reference is cited below:
  //
  // The functional role of cardiac T-tubules explored in a model of rat ventricular myocytes, Michal Pasek, Jiri Simurda, and Georges Christe, 2006, Philosophical Transactions of The Royal Society A, 81, 3029-3051. PubMed ID: 16608703 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=16608703&dopt=Abstract)
  //
  // Schematic of a ventricular myocyte. The description of electrical activity of surface (s) and tubular (t) membrane comprises formulation of ion transporters that are labelled in the scheme. The intracellular space contains the subspace, the Ca2+ uptake and Ca2+ release compartments of sarcoplasmic reticulum (NSR, JSR) and the Ca2+ buffers calmodulin (Bcm), troponin (Bltrpn,Bhtrpn) and calsequestrin (Bcs). The small filled rectangles in JSR membrane represent ryanodine receptors. The small bi-directional arrows denote Ca2+ diffusion. The dashed arrow represents ionic diffusion between the tubular and the bulk space. The currents included in the model were: ICa, calcium inward current; IKto, time-dependent transient outward potassium current; IKst, steady-state outward potassium current; IKf, hyperpolarization-activated current; IK1, time-independent inward rectifier potassium current; INab, background sodium current; ICab, background calcium current; IKb, background potassium current; INaCa, Na+/Ca2+ exchanger current; INaK, electrogenic Na+/K+ ATPase pump current; IpCa, sarcolemmal Ca-pump current.
  //
  // Note that this model is based on a quantitative description of electrical activity of the rat ventricular myocyte proposed by Pandit et al. (2001), which has also been described in CellML and can be found in the CellML Model Respository.
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit microvolt_millivolt as
    unit volt {pref: micro};
    unit per_millivolt;
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millivolt2 as
    unit volt {expo: -2, pref: milli};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit cm_per_second as
    unit cm;
    unit second {expo: -1};
  enddef;
  def unit cm3_per_second as
    unit cm3;
    unit second {expo: -1};
  enddef;
  def unit per_cm as
    unit metre {expo: -1, pref: centi};
  enddef;
  def unit per_cm2 as
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit per_cm3 as
    unit metre {expo: -3, pref: centi};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit milliS as
    unit siemens {pref: milli};
  enddef;
  def unit milliS_per_cm2 as
    unit milliS;
    unit cm2 {expo: -1};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit microA as
    unit ampere {pref: micro};
  enddef;
  def unit nanoA_per_microA as
    unit ampere {pref: nano};
    unit microA {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar2 as
    unit millimolar {expo: 2};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar2_per_cm3 as
    unit millimolar {expo: 2};
    unit metre {expo: -3, pref: centi};
  enddef;
  def unit per_millimolar_per_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar3_per_second as
    unit millimolar {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar4 as
    unit millimolar {expo: -4};
  enddef;
  def unit per_millimolar4_per_second as
    unit per_millimolar4;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit microA_per_millimolar as
    unit microA;
    unit millimolar {expo: -1};
  enddef;
  def unit microA_per_cm2 as
    unit microA;
    unit cm2 {expo: -1};
  enddef;
  def unit microF_per_cm2 as
    unit microF;
    unit cm2 {expo: -1};
  enddef;
  def unit kilo_ohm as
    unit ohm {pref: kilo};
  enddef;
  def unit ohm_cm as
    unit ohm;
    unit cm;
  enddef;
  def unit microA_per_millimolar4 as
    unit microA;
    unit per_millimolar4;
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1, pref: kilo};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit mole_per_coulomb as
    unit coulomb_per_mole {expo: -1};
  enddef;
  def unit cm3 as
    unit metre {expo: 3, pref: centi};
  enddef;
  def unit per_cm3_second as
    unit cm3 {expo: -1};
    unit second {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp model_parameters as
    var R: joule_per_kilomole_kelvin {init: 8310, pub: out};
    var T: kelvin {init: 295, pub: out};
    var F: coulomb_per_mole {init: 96500, pub: out};
    var Nae: millimolar {init: 140, pub: out};
    var Cae: millimolar {init: 1.2, pub: out};
    var Ke: millimolar {init: 5.4, pub: out};
    var Vt: cm3 {pub: out};
    var Vd: cm3 {pub: out};
    var Vmyo: cm3 {pub: out};
    var Sms: cm2 {pub: out};
    var Smt: cm2 {pub: out};
    var Cms: microF {pub: out};
    var Cmt: microF {pub: out};
    var Rst: ohm {pub: out};
    var VSRrel: cm3 {pub: out};
    var VSRup: cm3 {pub: out};
    var Vc: cm3;
    var pt: dimensionless;
    var Lt: cm;
    var Rot: ohm_cm {init: 83.33};
    var radiust: cm {init: 150e-7};
    var ptcm: per_cm2 {init: 30000000};
    var Smtot: cm2 {init: 0.0001};
    Vc = Smtot/7850{per_cm};
    Vmyo = Vc*0.585{dimensionless};
    VSRup = Vc*0.0315{dimensionless};
    VSRrel = Vc*0.0035{dimensionless};
    Vd = Vc*0.000075{dimensionless};
    Sms = Smtot-0.44e4{per_cm}*Vc;
    Smt = Smtot-Sms;
    pt = ptcm*Sms;
    Lt = Smt/(2{dimensionless}*3.14159{dimensionless}*radiust*pt);
    Vt = 3.14159{dimensionless}*sqr(radiust)*Lt*pt;
    Cmt = Smt*1{microF_per_cm2};
    Cms = Sms*1{microF_per_cm2};
    Rst = Rot*Lt/2{dimensionless}/(3.14159{dimensionless}*sqr(radiust)*pt);
  enddef;

  def comp i_circ as
    var i_circ: microA {pub: out};
    var Rst: ohm {pub: in};
    var Vms: millivolt {pub: in};
    var Vmt: millivolt {pub: in};
    i_circ = 1000{microvolt_millivolt}*(Vmt/Rst-Vms/Rst);
  enddef;

  def comp i_Stim as
    var i_Stim: microA {pub: out};
    var stim_offset: second {init: 0};
    var stim_period: second {init: 0.2};
    var stim_duration: second {init: 0.001};
    var stim_amplitude: microA {init: 0.0052};
    var past: second;
    var time: second {pub: in};
    past = floor(time/stim_period)*stim_period;
    i_Stim = sel
      case (time-past >= stim_offset) and (time-past <= stim_offset+stim_duration):
        stim_amplitude;
      otherwise:
        0{microA};
    endsel;
  enddef;

  def comp membrane_permeabilities as
    var gNas: milliS {pub: out};
    var gCas: cm3_per_second {pub: out};
    var gKfs: milliS {pub: out};
    var gKsts: milliS {pub: out};
    var gK1s: milliS {pub: out};
    var gKbs: milliS {pub: out};
    var gKtos: milliS {pub: out};
    var gNabs: milliS {pub: out};
    var gCabs: milliS {pub: out};
    var i_pCa_maxs: microA {pub: out};
    var i_NaK_maxs: microA {pub: out};
    var i_NaCa_maxs: microA {pub: out};
    var gNat: milliS {pub: out};
    var gCat: cm3_per_second {pub: out};
    var gKft: milliS {pub: out};
    var gKstt: milliS {pub: out};
    var gK1t: milliS {pub: out};
    var gKbt: milliS {pub: out};
    var gKtot: milliS {pub: out};
    var gNabt: milliS {pub: out};
    var gCabt: milliS {pub: out};
    var i_pCa_maxt: microA {pub: out};
    var i_NaK_maxt: microA {pub: out};
    var i_NaCa_maxt: microA {pub: out};
    var gNa: milliS_per_cm2 {init: 10};
    var fNat: dimensionless {init: 0.56};
    var gKf: milliS_per_cm2 {init: 0.0145};
    var fKft: dimensionless {init: 0.56};
    var gKst: milliS_per_cm2 {init: 0.07};
    var fKstt: dimensionless {init: 0.76};
    var gK1: milliS_per_cm2 {init: 0.24};
    var fK1t: dimensionless {init: 0.56};
    var gKb: milliS_per_cm2 {init: 0.00138};
    var fKbt: dimensionless {init: 0.56};
    var gKto: milliS_per_cm2 {init: 0.35};
    var fKtot: dimensionless {init: 0.56};
    var gNab: milliS_per_cm2 {init: 0.0008015};
    var fNabt: dimensionless {init: 0.56};
    var gCab: milliS_per_cm2 {init: 0.000648};
    var fCabt: dimensionless {init: 0.56};
    var gCa: cm_per_second {init: 0.00021};
    var fCat: dimensionless {init: 0.87};
    var i_NaCa_max: microA_per_cm2 {init: 0.00018};
    var fNaCat: dimensionless {init: 0.81};
    var i_NaK_max: microA_per_cm2 {init: 1};
    var fNaKt: dimensionless {init: 0.59};
    var i_pCa_max: microA_per_cm2 {init: 0.85};
    var fpCat: dimensionless {init: 0.56};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    gNas = gNa*(Sms+Smt)*(1{dimensionless}-fNat);
    gNat = gNa*(Sms+Smt)*fNat;
    gKfs = gKf*(Sms+Smt)*(1{dimensionless}-fKft);
    gKft = gKf*(Sms+Smt)*fKft;
    gKsts = gKst*(Sms+Smt)*(1{dimensionless}-fKstt);
    gKstt = gKst*(Sms+Smt)*fKstt;
    gK1s = gK1*(Sms+Smt)*(1{dimensionless}-fK1t);
    gK1t = gK1*(Sms+Smt)*fK1t;
    gKbs = gKb*(Sms+Smt)*(1{dimensionless}-fKbt);
    gKbt = gKb*(Sms+Smt)*fKbt;
    gKtos = gKto*(Sms+Smt)*(1{dimensionless}-fKtot);
    gKtot = gKto*(Sms+Smt)*fKtot;
    gNabs = gNab*(Sms+Smt)*(1{dimensionless}-fNabt);
    gNabt = gNab*(Sms+Smt)*fNabt;
    gCabs = gCab*(Sms+Smt)*(1{dimensionless}-fCabt);
    gCabt = gCab*(Sms+Smt)*fCabt;
    gCas = gCa*(Sms+Smt)*(1{dimensionless}-fCat);
    gCat = gCa*(Sms+Smt)*fCat;
    i_NaCa_maxs = i_NaCa_max*(Sms+Smt)*(1{dimensionless}-fNaCat);
    i_NaCa_maxt = i_NaCa_max*(Sms+Smt)*fNaCat;
    i_NaK_maxs = i_NaK_max*(Sms+Smt)*(1{dimensionless}-fNaKt);
    i_NaK_maxt = i_NaK_max*(Sms+Smt)*fNaKt;
    i_pCa_maxs = i_pCa_max*(Sms+Smt)*(1{dimensionless}-fpCat);
    i_pCa_maxt = i_pCa_max*(Sms+Smt)*fpCat;
  enddef;

  def comp i_Nas as
    var i_Nas: microA {pub: out};
    var E_Nas: millivolt {pub: out};
    var gNas: milliS {pub: in};
    var Nai: millimolar {pub: in};
    var Nae: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ke: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {priv: out, pub: in};
    var Vms: millivolt {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    E_Nas = ln(Nae/Nai)*R*T/F;
    i_Nas = gNas*pow(m, 3{dimensionless})*h*(Vms-ln((Nae+0.12{dimensionless}*Ke)/(Nai+0.12{dimensionless}*Ki))*R*T/F);
  enddef;

  def comp i_Nas_m_gate as
    var m: dimensionless {init: 1.4956482e-6, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var Vms: millivolt {pub: in};
    var time: second {pub: in};
    alpha_m = 117.26{per_millivolt_second}*(Vms+59.3{millivolt})/(1{dimensionless}-exp(-0.55{per_millivolt}*(Vms+59.3{millivolt})));
    beta_m = 3800{per_second}*exp(-0.072{per_millivolt}*(Vms+61{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp i_Nas_h_gate as
    var h: dimensionless {init: 5.8925181e-1, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var Vms: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 284.4{per_second}/(1{dimensionless}+exp(0.0812{per_millivolt}*(Vms+115.9{millivolt})));
    beta_h = 18.77{per_millivolt_second}*(Vms+64.4{millivolt})/(1{dimensionless}-exp(-0.22{per_millivolt}*(Vms+64.4{millivolt})));
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp i_Nat as
    var i_Nat: microA {pub: out};
    var E_Nat: millivolt {pub: out};
    var gNat: milliS {pub: in};
    var Nai: millimolar {pub: in};
    var Nat: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Kt: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {priv: out, pub: in};
    var Vmt: millivolt {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    E_Nat = ln(Nat/Nai)*R*T/F;
    i_Nat = gNat*pow(m, 3{dimensionless})*h*(Vmt-ln((Nat+0.12{dimensionless}*Kt)/(Nai+0.12{dimensionless}*Ki))*R*T/F);
  enddef;

  def comp i_Nat_m_gate as
    var m: dimensionless {init: 1.4956545e-6, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var Vmt: millivolt {pub: in};
    var time: second {pub: in};
    alpha_m = 117.26{per_millivolt_second}*(Vmt+59.3{millivolt})/(1{dimensionless}-exp(-0.55{per_millivolt}*(Vmt+59.3{millivolt})));
    beta_m = 3800{per_second}*exp(-0.072{per_millivolt}*(Vmt+61{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp i_Nat_h_gate as
    var h: dimensionless {init: 5.8924925e-1, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var Vmt: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 284.4{per_second}/(1{dimensionless}+exp(0.0812{per_millivolt}*(Vmt+115.9{millivolt})));
    beta_h = 18.77{per_millivolt_second}*(Vmt+64.4{millivolt})/(1{dimensionless}-exp(-0.22{per_millivolt}*(Vmt+64.4{millivolt})));
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp i_Cas as
    var i_Cas: microA {pub: out};
    var E_Cas: millivolt {pub: out};
    var Co: dimensionless {init: 2.2292624e-6};
    var C1: dimensionless {init: 9.999433e-1};
    var C2: dimensionless {init: 9.9994746e-1};
    var tauCo: second;
    var tauCcast: second {init: 0.009};
    var tauC1: second;
    var tauC2: second;
    var Ccast: dimensionless {init: 9.6561949e-3};
    var Coinf: dimensionless;
    var Ccastinf: dimensionless;
    var C1inf: dimensionless;
    var C2inf: dimensionless;
    var gCas: cm3_per_second {pub: in};
    var time: second {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Vms: millivolt {pub: in};
    var Cass: millimolar {pub: in};
    var Cae: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    E_Cas = ln(Cae/Cai)*R*T/(2{dimensionless}*F);
    Coinf = 1{dimensionless}/(1{dimensionless}+exp(-(Vms+15.3{millivolt})/5{millivolt}));
    tauCo = 0.00025{second}+0.00305{second}*exp(-0.0045{per_millivolt2}*sqr(Vms+7{millivolt}))+0.00105{second}*exp(-0.002{per_millivolt2}*sqr(Vms-18{millivolt}));
    C1inf = 1{dimensionless}/(1{dimensionless}+exp((Vms+26.7{millivolt})/5.4{millivolt}));
    tauC1 = 0.105{second}*exp(-sqr((Vms+45{millivolt})/12{millivolt}))+0.04{second}/(1{dimensionless}+exp((-Vms+25{millivolt})/25{millivolt}))+0.015{second}/(1{dimensionless}+exp((Vms+75{millivolt})/25{millivolt}));
    C2inf = C1inf;
    tauC2 = 0.041{second}*exp(-sqr((Vms+47{millivolt})/12{millivolt}))+0.08{second}/(1{dimensionless}+exp(-(Vms+55{millivolt})/5{millivolt}))+0.015{second}/(1{dimensionless}+exp((Vms+75{millivolt})/25{millivolt}));
    Ccastinf = 1{dimensionless}/(1{dimensionless}+Cass/0.01{millimolar});
    ode(C1, time) = (C1inf-C1)/tauC1;
    ode(C2, time) = (C2inf-C2)/tauC2;
    ode(Co, time) = (Coinf-Co)/tauCo;
    ode(Ccast, time) = (Ccastinf-Ccast)/tauCcast;
    i_Cas = gCas*4{dimensionless}*Vms*sqr(F)/(R*T)*(Cass*exp(2{dimensionless}*Vms*F/(R*T))-0.341{dimensionless}*Cae)/(exp(2{dimensionless}*Vms*F/(R*T))-1{dimensionless})*Co*((0.9{dimensionless}+Ccast/10{dimensionless})*C1+(0.1{dimensionless}-Ccast/10{dimensionless})*C2);
  enddef;

  def comp i_Cat as
    var i_Cat: microA {pub: out};
    var E_Cat: millivolt {pub: out};
    var Co: dimensionless {init: 2.2292655e-6};
    var C1: dimensionless {init: 9.999433e-1};
    var C2: dimensionless {init: 9.9994746e-1};
    var tauCo: second;
    var tauCcast: second {init: 0.009};
    var tauC1: second;
    var tauC2: second;
    var Coinf: dimensionless;
    var Ccast: dimensionless {init: 9.6561949e-1};
    var Ccastinf: dimensionless;
    var C1inf: dimensionless;
    var C2inf: dimensionless;
    var gCat: cm3_per_second {pub: in};
    var time: second {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Vmt: millivolt {pub: in};
    var Cass: millimolar {pub: in};
    var Cat: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    E_Cat = ln(Cat/Cai)*R*T/(2{dimensionless}*F);
    Coinf = 1{dimensionless}/(1{dimensionless}+exp(-(Vmt+15.3{millivolt})/5{millivolt}));
    tauCo = 0.00025{second}+0.00305{second}*exp(-0.0045{per_millivolt2}*sqr(Vmt+7{millivolt}))+0.00105{second}*exp(-0.002{per_millivolt2}*sqr(Vmt-18{millivolt}));
    C1inf = 1{dimensionless}/(1{dimensionless}+exp((Vmt+26.7{millivolt})/5.4{millivolt}));
    tauC1 = 0.105{second}*exp(-sqr((Vmt+45{millivolt})/12{millivolt}))+0.04{second}/(1{dimensionless}+exp((-Vmt+25{millivolt})/25{millivolt}))+0.015{second}/(1{dimensionless}+exp((Vmt+75{millivolt})/25{millivolt}));
    C2inf = C1inf;
    tauC2 = 0.041{second}*exp(-sqr((Vmt+47{millivolt})/12{millivolt}))+0.08{second}/(1{dimensionless}+exp(-(Vmt+55{millivolt})/5{millivolt}))+0.015{second}/(1{dimensionless}+exp((Vmt+75{millivolt})/25{millivolt}));
    Ccastinf = 1{dimensionless}/(1{dimensionless}+Cass/0.01{millimolar});
    ode(C1, time) = (C1inf-C1)/tauC1;
    ode(C2, time) = (C2inf-C2)/tauC2;
    ode(Co, time) = (Coinf-Co)/tauCo;
    ode(Ccast, time) = (Ccastinf-Ccast)/tauCcast;
    i_Cat = gCat*4{dimensionless}*Vmt*sqr(F)/(R*T)*(Cass*exp(2{dimensionless}*Vmt*F/(R*T))-0.341{dimensionless}*Cat)/(exp(2{dimensionless}*Vmt*F/(R*T))-1{dimensionless})*Co*((0.9{dimensionless}+Ccast/10{dimensionless})*C1+(0.1{dimensionless}-Ccast/10{dimensionless})*C2);
  enddef;

  def comp i_Ktos as
    var i_Ktos: microA {pub: out};
    var E_Ks: millivolt {pub: out};
    var gKtos: milliS {pub: in};
    var time: second {priv: out, pub: in};
    var Vms: millivolt {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Ke: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var rs: dimensionless {priv: in};
    var ss: dimensionless {priv: in};
    var sss: dimensionless {priv: in};
    i_Ktos = gKtos*rs*(0.886{dimensionless}*ss+0.114{dimensionless}*sss)*(Vms-E_Ks);
    E_Ks = ln(Ke/Ki)*R*T/F;
  enddef;

  def comp i_Ktos_rs_gate as
    var rs: dimensionless {init: 2.2169306e-3, pub: out};
    var taurs: second;
    var rinfs: dimensionless;
    var Vms: millivolt {pub: in};
    var time: second {pub: in};
    rinfs = 1{dimensionless}/(1{dimensionless}+exp((Vms+10.6{millivolt})/(-11.42{millivolt})));
    taurs = 1{second}/(45.16{dimensionless}*exp(0.03577{per_millivolt}*(Vms+50{millivolt}))+98.9{dimensionless}*exp(-0.1{per_millivolt}*(Vms+38{millivolt})));
    ode(rs, time) = (rinfs-rs)/taurs;
  enddef;

  def comp i_Ktos_ss_gate as
    var ss: dimensionless {init: 6.2597631e-1, pub: out};
    var tauss: second;
    var sinfs: dimensionless;
    var Vms: millivolt {pub: in};
    var time: second {pub: in};
    sinfs = 1{dimensionless}/(1{dimensionless}+exp((Vms+45.3{millivolt})/6.8841{millivolt}));
    tauss = 0.35{second}*exp(-sqr(0.0666{per_millivolt}*(Vms+70{millivolt})))+0.035{second};
    ode(ss, time) = (sinfs-ss)/tauss;
  enddef;

  def comp i_Ktos_sss_gate as
    var sss: dimensionless {init: 1.6854927e-1, pub: out};
    var tausss: second;
    var ssinfs: dimensionless;
    var Vms: millivolt {pub: in};
    var time: second {pub: in};
    ssinfs = 1{dimensionless}/(1{dimensionless}+exp((Vms+45.3{millivolt})/6.8841{millivolt}));
    tausss = 3.7{second}*exp(-sqr(0.0333{per_millivolt}*(Vms+70{millivolt})))+0.035{second};
    ode(sss, time) = (ssinfs-sss)/tausss;
  enddef;

  def comp i_Ktot as
    var i_Ktot: microA {pub: out};
    var E_Kt: millivolt {pub: out};
    var gKtot: milliS {pub: in};
    var time: second {priv: out, pub: in};
    var Vmt: millivolt {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Kt: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var rt: dimensionless {priv: in};
    var st: dimensionless {priv: in};
    var sst: dimensionless {priv: in};
    E_Kt = ln(Kt/Ki)*R*T/F;
    i_Ktot = gKtot*rt*(0.886{dimensionless}*st+0.114{dimensionless}*sst)*(Vmt-E_Kt);
  enddef;

  def comp i_Ktot_rt_gate as
    var rt: dimensionless {init: 2.216932e-3, pub: out};
    var taurt: second;
    var rinft: dimensionless;
    var Vmt: millivolt {pub: in};
    var time: second {pub: in};
    rinft = 1{dimensionless}/(1{dimensionless}+exp((Vmt+10.6{millivolt})/(-11.42{millivolt})));
    taurt = 1{second}/(45.16{dimensionless}*exp(0.03577{per_millivolt}*(Vmt+50{millivolt}))+98.9{dimensionless}*exp(-0.1{per_millivolt}*(Vmt+38{millivolt})));
    ode(rt, time) = (rinft-rt)/taurt;
  enddef;

  def comp i_Ktot_st_gate as
    var st: dimensionless {init: 6.2597784e-1, pub: out};
    var taust: second;
    var sinft: dimensionless;
    var Vmt: millivolt {pub: in};
    var time: second {pub: in};
    sinft = 1{dimensionless}/(1{dimensionless}+exp((Vmt+45.3{millivolt})/6.8841{millivolt}));
    taust = 0.35{second}*exp(-sqr(0.0666{per_millivolt}*(Vmt+70{millivolt})))+0.035{second};
    ode(st, time) = (sinft-st)/taust;
  enddef;

  def comp i_Ktot_sst_gate as
    var sst: dimensionless {init: 1.6852676e-1, pub: out};
    var tausst: second;
    var ssinft: dimensionless;
    var Vmt: millivolt {pub: in};
    var time: second {pub: in};
    ssinft = 1{dimensionless}/(1{dimensionless}+exp((Vmt+45.3{millivolt})/6.8841{millivolt}));
    tausst = 3.7{second}*exp(-sqr(0.0333{per_millivolt}*(Vmt+70{millivolt})))+0.035{second};
    ode(sst, time) = (ssinft-sst)/tausst;
  enddef;

  def comp i_Ksts as
    var i_Ksts: microA {pub: out};
    var gKsts: milliS {pub: in};
    var time: second {priv: out, pub: in};
    var Vms: millivolt {priv: out, pub: in};
    var E_Ks: millivolt {pub: in};
    var rsts: dimensionless {priv: in};
    var ssts: dimensionless {priv: in};
    i_Ksts = gKsts*rsts*ssts*(Vms-E_Ks);
  enddef;

  def comp i_Ksts_rsts_gate as
    var rsts: dimensionless {init: 2.9408514e-3, pub: out};
    var taursts: second;
    var rstinfs: dimensionless;
    var Vms: millivolt {pub: in};
    var time: second {pub: in};
    rstinfs = 1{dimensionless}/(1{dimensionless}+exp(-(Vms+11.5{millivolt})/11.82{millivolt}));
    taursts = 10{second}/(45.16{dimensionless}*exp(0.03577{per_millivolt}*(Vms+50{millivolt}))+98.9{dimensionless}*exp(-0.1{per_millivolt}*(Vms+38{millivolt})));
    ode(rsts, time) = (rstinfs-rsts)/taursts;
  enddef;

  def comp i_Ksts_ssts_gate as
    var ssts: dimensionless {init: 2.4351431e-1, pub: out};
    var taussts: second {init: 2.1};
    var sstinfs: dimensionless;
    var Vms: millivolt {pub: in};
    var time: second {pub: in};
    sstinfs = 1{dimensionless}/(1{dimensionless}+exp((Vms+87.5{millivolt})/10.3{millivolt}));
    ode(ssts, time) = (sstinfs-ssts)/taussts;
  enddef;

  def comp i_Kstt as
    var i_Kstt: microA {pub: out};
    var gKstt: milliS {pub: in};
    var time: second {priv: out, pub: in};
    var Vmt: millivolt {priv: out, pub: in};
    var E_Kt: millivolt {pub: in};
    var rstt: dimensionless {priv: in};
    var sstt: dimensionless {priv: in};
    i_Kstt = gKstt*rstt*sstt*(Vmt-E_Kt);
  enddef;

  def comp i_Kstt_rstt_gate as
    var rstt: dimensionless {init: 2.9408534e-3, pub: out};
    var taurstt: second;
    var rstinft: dimensionless;
    var Vmt: millivolt {pub: in};
    var time: second {pub: in};
    rstinft = 1{dimensionless}/(1{dimensionless}+exp(-(Vmt+11.5{millivolt})/11.82{millivolt}));
    taurstt = 10{second}/(45.16{dimensionless}*exp(0.03577{per_millivolt}*(Vmt+50{millivolt}))+98.9{dimensionless}*exp(-0.1{per_millivolt}*(Vmt+38{millivolt})));
    ode(rstt, time) = (rstinft-rstt)/taurstt;
  enddef;

  def comp i_Kstt_sstt_gate as
    var sstt: dimensionless {init: 2.4351426e-1, pub: out};
    var tausstt: second {init: 2.1};
    var sstinft: dimensionless;
    var Vmt: millivolt {pub: in};
    var time: second {pub: in};
    sstinft = 1{dimensionless}/(1{dimensionless}+exp((Vmt+87.5{millivolt})/10.3{millivolt}));
    ode(sstt, time) = (sstinft-sstt)/tausstt;
  enddef;

  def comp i_Kfs as
    var i_Kfs: microA {pub: out};
    var gKfs: milliS {pub: in};
    var time: second {priv: out, pub: in};
    var Vms: millivolt {priv: out, pub: in};
    var E_Ks: millivolt {pub: in};
    var E_Nas: millivolt {pub: in};
    var qs: dimensionless {priv: in};
    i_Kfs = gKfs*qs*(0.2{dimensionless}*(Vms-E_Nas)+0.8{dimensionless}*(Vms-E_Ks));
  enddef;

  def comp i_Kfs_qs_gate as
    var qs: dimensionless {init: 2.3879297e-3, pub: out};
    var tauqs: second;
    var qinfs: dimensionless;
    var Vms: millivolt {pub: in};
    var time: second {pub: in};
    qinfs = 1{dimensionless}/(1{dimensionless}+exp((Vms+138.6{millivolt})/10.48{millivolt}));
    tauqs = 1{second}/(0.11885{dimensionless}*exp((Vms+80{millivolt})/28.37{millivolt})+0.5623{dimensionless}*exp(-(Vms+80{millivolt})/14.19{millivolt}));
    ode(qs, time) = (qinfs-qs)/tauqs;
  enddef;

  def comp i_Kft as
    var i_Kft: microA {pub: out};
    var gKft: milliS {pub: in};
    var time: second {priv: out, pub: in};
    var Vmt: millivolt {priv: out, pub: in};
    var E_Kt: millivolt {pub: in};
    var E_Nat: millivolt {pub: in};
    var qt: dimensionless {priv: in};
    i_Kft = gKft*qt*(0.2{dimensionless}*(Vmt-E_Nat)+0.8{dimensionless}*(Vmt-E_Kt));
  enddef;

  def comp i_Kft_qt_gate as
    var qt: dimensionless {init: 2.3878574e-3, pub: out};
    var tauqt: second;
    var qinft: dimensionless;
    var Vmt: millivolt {pub: in};
    var time: second {pub: in};
    qinft = 1{dimensionless}/(1{dimensionless}+exp((Vmt+138.6{millivolt})/10.48{millivolt}));
    tauqt = 1{second}/(0.11885{dimensionless}*exp((Vmt+80{millivolt})/28.37{millivolt})+0.5623{dimensionless}*exp(-(Vmt+80{millivolt})/14.19{millivolt}));
    ode(qt, time) = (qinft-qt)/tauqt;
  enddef;

  def comp i_K1s as
    var i_K1s: microA {pub: out};
    var gK1s: milliS {pub: in};
    var time: second {pub: in};
    var Vms: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Ke: millimolar {pub: in};
    var E_Ks: millivolt {pub: in};
    i_K1s = gK1s*(Vms-E_Ks-1.73{millivolt})/(1{dimensionless}+exp(1.613{dimensionless}*F/(R*T)*(Vms-E_Ks-1.73{millivolt}))*(1{dimensionless}+exp((Ke-0.9988{millimolar})/(-0.124{millimolar}))));
  enddef;

  def comp i_K1t as
    var i_K1t: microA {pub: out};
    var gK1t: milliS {pub: in};
    var time: second {pub: in};
    var Vmt: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Kt: millimolar {pub: in};
    var E_Kt: millivolt {pub: in};
    i_K1t = gK1t*(Vmt-E_Kt-1.73{millivolt})/(1{dimensionless}+exp(1.613{dimensionless}*F/(R*T)*(Vmt-E_Kt-1.73{millivolt}))*(1{dimensionless}+exp((Kt-0.9988{millimolar})/(-0.124{millimolar}))));
  enddef;

  def comp i_Nabs as
    var i_Nabs: microA {pub: out};
    var gNabs: milliS {pub: in};
    var Vms: millivolt {pub: in};
    var E_Nas: millivolt {pub: in};
    i_Nabs = gNabs*(Vms-E_Nas);
  enddef;

  def comp i_Nabt as
    var i_Nabt: microA {pub: out};
    var gNabt: milliS {pub: in};
    var Vmt: millivolt {pub: in};
    var E_Nat: millivolt {pub: in};
    i_Nabt = gNabt*(Vmt-E_Nat);
  enddef;

  def comp i_Cabs as
    var i_Cabs: microA {pub: out};
    var gCabs: milliS {pub: in};
    var Vms: millivolt {pub: in};
    var E_Cas: millivolt {pub: in};
    i_Cabs = gCabs*(Vms-E_Cas);
  enddef;

  def comp i_Cabt as
    var i_Cabt: microA {pub: out};
    var gCabt: milliS {pub: in};
    var Vmt: millivolt {pub: in};
    var E_Cat: millivolt {pub: in};
    i_Cabt = gCabt*(Vmt-E_Cat);
  enddef;

  def comp i_Kbs as
    var i_Kbs: microA {pub: out};
    var gKbs: milliS {pub: in};
    var Vms: millivolt {pub: in};
    var E_Ks: millivolt {pub: in};
    i_Kbs = gKbs*(Vms-E_Ks);
  enddef;

  def comp i_Kbt as
    var i_Kbt: microA {pub: out};
    var gKbt: milliS {pub: in};
    var Vmt: millivolt {pub: in};
    var E_Kt: millivolt {pub: in};
    i_Kbt = gKbt*(Vmt-E_Kt);
  enddef;

  def comp i_NaCas as
    var i_NaCas: microA {pub: out};
    var i_NaCa_maxs: microA {pub: in};
    var Nai: millimolar {pub: in};
    var Nae: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cae: millimolar {pub: in};
    var Vms: millivolt {pub: in};
    i_NaCas = i_NaCa_maxs*(exp(0.0187{per_millivolt}*Vms)*pow(Nai, 3{dimensionless})*Cae-exp(-0.0187{per_millivolt}*Vms)*pow(Nae, 3{dimensionless})*Cai)/(1{millimolar4}+0.0001{dimensionless}*(pow(Nae, 3{dimensionless})*Cai+pow(Nai, 3{dimensionless})*Cae));
  enddef;

  def comp i_NaCat as
    var i_NaCat: microA {pub: out};
    var i_NaCa_maxt: microA {pub: in};
    var Nai: millimolar {pub: in};
    var Nat: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cat: millimolar {pub: in};
    var Vmt: millivolt {pub: in};
    i_NaCat = i_NaCa_maxt*(exp(0.0187{per_millivolt}*Vmt)*pow(Nai, 3{dimensionless})*Cat-exp(-0.0187{per_millivolt}*Vmt)*pow(Nat, 3{dimensionless})*Cai)/(1{millimolar4}+0.0001{dimensionless}*(pow(Nat, 3{dimensionless})*Cai+pow(Nai, 3{dimensionless})*Cat));
  enddef;

  def comp i_NaKs as
    var i_NaKs: microA {pub: out};
    var i_NaK_maxs: microA {pub: in};
    var Ke: millimolar {pub: in};
    var Nae: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Vms: millivolt {pub: in};
    i_NaKs = i_NaK_maxs/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*Vms*F/(R*T))+0.0365{dimensionless}*1{dimensionless}/7{dimensionless}*(exp(Nae/67.3{millimolar})-1{dimensionless})*exp(-Vms*F/(R*T)))*1{dimensionless}/(1{dimensionless}+pow(10{millimolar}/Nai, 1.5{dimensionless}))*Ke/(Ke+1.5{millimolar});
  enddef;

  def comp i_NaKt as
    var i_NaKt: microA {pub: out};
    var i_NaK_maxt: microA {pub: in};
    var Kt: millimolar {pub: in};
    var Nat: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Vmt: millivolt {pub: in};
    i_NaKt = i_NaK_maxt/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*Vmt*F/(R*T))+0.0365{dimensionless}*1{dimensionless}/7{dimensionless}*(exp(Nat/67.3{millimolar})-1{dimensionless})*exp(-Vmt*F/(R*T)))*1{dimensionless}/(1{dimensionless}+pow(10{millimolar}/Nai, 1.5{dimensionless}))*Kt/(Kt+1.5{millimolar});
  enddef;

  def comp i_pCas as
    var i_pCas: microA {pub: out};
    var i_pCa_maxs: microA {pub: in};
    var Cai: millimolar {pub: in};
    i_pCas = i_pCa_maxs*Cai/(0.0004{millimolar}+Cai);
  enddef;

  def comp i_pCat as
    var i_pCat: microA {pub: out};
    var i_pCa_maxt: microA {pub: in};
    var Cai: millimolar {pub: in};
    i_pCat = i_pCa_maxt*Cai/(0.0004{millimolar}+Cai);
  enddef;

  def comp t_tubular_ion_fluxes as
    var JteNa: millimolar_per_second {pub: out};
    var JteCa: millimolar_per_second {pub: out};
    var JteK: millimolar_per_second {pub: out};
    var tauNa: second {init: 0.15};
    var tauCa: second {init: 0.5};
    var tauK: second {init: 0.15};
    var Vt: cm3 {pub: in};
    var Nat: millimolar {pub: in};
    var Cat: millimolar {pub: in};
    var Kt: millimolar {pub: in};
    var Nae: millimolar {pub: in};
    var Cae: millimolar {pub: in};
    var Ke: millimolar {pub: in};
    JteNa = 1{per_cm3}*Vt/tauNa*(Nat-Nae);
    JteCa = 1{per_cm3}*Vt/tauCa*(Cat-Cae);
    JteK = 1{per_cm3}*Vt/tauK*(Kt-Ke);
  enddef;

  def comp JCaSRup as
    var JCaSRup: millimolar_per_second {pub: out};
    var Cai: millimolar {pub: in};
    var CaSRup: millimolar {pub: in};
    var Vmyo: cm3 {pub: in};
    JCaSRup = 1{per_cm3_second}*Vmyo*(0.04{millimolar}*10{dimensionless}*pow(Cai/0.000168{millimolar}, 1.2{dimensionless})-0.9{millimolar}*CaSRup/3.29{millimolar})/(1{dimensionless}+pow(Cai/0.000168{millimolar}, 1.2{dimensionless})+CaSRup/3.29{millimolar});
  enddef;

  def comp Jtr as
    var Jtr: millimolar_per_second {pub: out};
    var tautr: second {init: 0.03448};
    var CaSRrel: millimolar {pub: in};
    var CaSRup: millimolar {pub: in};
    var VSRrel: cm3 {pub: in};
    Jtr = 1{per_cm3}*VSRrel/tautr*(CaSRup-CaSRrel);
  enddef;

  def comp JCaSRrel as
    var JCaSRrel: millimolar_per_second {pub: out};
    var kap: per_millimolar4_per_second;
    var kam: per_second {init: 576};
    var kbp: per_millimolar3_per_second;
    var kbm: per_second {init: 1930};
    var kcp: per_second {init: 18};
    var kcm: per_second {init: 0.8};
    var F1: dimensionless {init: 1.4612276e-1};
    var F2: dimensionless {init: 1.0496025e-3};
    var F3: dimensionless {init: 9.4214405e-8};
    var F4: dimensionless {init: 8.5283034e-1};
    var time: second {pub: in};
    var VSRrel: cm3 {pub: in};
    var Cass: millimolar {pub: in};
    var CaSRrel: millimolar {pub: in};
    JCaSRrel = 1800{per_cm3_second}*VSRrel*(F2+F3)*(CaSRrel-Cass);
    kap = 12.15e+12{per_millimolar4_per_second};
    kbp = 4.05e+9{per_millimolar3_per_second};
    ode(F1, time) = F2*kam-F1*kap*pow(Cass, 4{dimensionless});
    ode(F2, time) = F1*kap*pow(Cass, 4{dimensionless})+F3*kbm+F4*kcm-F2*(kam+kbp*pow(Cass, 3{dimensionless})+kcp);
    ode(F3, time) = F2*kbp*pow(Cass, 3{dimensionless})-F3*kbm;
    ode(F4, time) = F2*kcp-F4*kcm;
  enddef;

  def comp JCad as
    var JCad: millimolar_per_second {pub: out};
    var taud: second {init: 0.003125};
    var Cai: millimolar {pub: in};
    var Cass: millimolar {pub: in};
    var Vmyo: cm3 {pub: in};
    JCad = 1{per_cm3}*(Cass-Cai)*Vmyo/taud;
  enddef;

  def comp CaSRup as
    var CaSRup: millimolar {init: 1.5374352e0, pub: out};
    var JCaSRup: millimolar_per_second {pub: in};
    var Jtr: millimolar_per_second {pub: in};
    var VSRup: cm3 {pub: in};
    var time: second {pub: in};
    ode(CaSRup, time) = (JCaSRup-Jtr)/(1{per_cm3}*VSRup);
  enddef;

  def comp CaSRrel as
    var CaSRrel: millimolar {init: 1.335789e0, pub: out};
    var Jtr: millimolar_per_second {pub: in};
    var JCaSRrel: millimolar_per_second {pub: in};
    var VSRrel: cm3 {pub: in};
    var time: second {pub: in};
    ode(CaSRrel, time) = 1{cm3}/(1{dimensionless}+15{millimolar}*0.8{millimolar}/sqr(0.8{millimolar}+CaSRrel))*(Jtr-JCaSRrel)/VSRrel;
  enddef;

  def comp ion_concentrations as
    var Nai: millimolar {init: 1.9426568e1, pub: out};
    var Cai: millimolar {init: 2.2847292e-4, pub: out};
    var Ki: millimolar {init: 1.2494394e2, pub: out};
    var Nat: millimolar {init: 1.3998172e2, pub: out};
    var Cat: millimolar {init: 1.1906442e0, pub: out};
    var Kt: millimolar {init: 5.3450263e0, pub: out};
    var Cass: millimolar {init: 3.4938669e-4, pub: out};
    var BTRH: millimolar {init: 9.9121461e-1};
    var BTRL: millimolar {init: 1.9925769e-2};
    var dBTRH: millimolar_per_second;
    var dBTRL: millimolar_per_second;
    var Vd: cm3 {pub: in};
    var VSRrel: cm3 {pub: in};
    var VSRup: cm3 {pub: in};
    var Vt: cm3 {pub: in};
    var Vmyo: cm3 {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Stim: microA {pub: in};
    var i_Nas: microA {pub: in};
    var i_Cas: microA {pub: in};
    var i_Nabs: microA {pub: in};
    var i_NaCas: microA {pub: in};
    var i_NaKs: microA {pub: in};
    var i_Kfs: microA {pub: in};
    var i_Kbs: microA {pub: in};
    var i_K1s: microA {pub: in};
    var i_Ktos: microA {pub: in};
    var i_Ksts: microA {pub: in};
    var i_pCas: microA {pub: in};
    var i_Cabs: microA {pub: in};
    var i_Nat: microA {pub: in};
    var i_Cat: microA {pub: in};
    var i_Nabt: microA {pub: in};
    var i_NaCat: microA {pub: in};
    var i_NaKt: microA {pub: in};
    var i_Kft: microA {pub: in};
    var i_Kbt: microA {pub: in};
    var i_K1t: microA {pub: in};
    var i_Ktot: microA {pub: in};
    var i_Kstt: microA {pub: in};
    var i_pCat: microA {pub: in};
    var i_Cabt: microA {pub: in};
    var JCaSRup: millimolar_per_second {pub: in};
    var JCaSRrel: millimolar_per_second {pub: in};
    var JCad: millimolar_per_second {pub: in};
    var Jtr: millimolar_per_second {pub: in};
    var JteNa: millimolar_per_second {pub: in};
    var JteCa: millimolar_per_second {pub: in};
    var JteK: millimolar_per_second {pub: in};
    dBTRH = 20000{per_millimolar_second}*Cai*(1{millimolar}-BTRH)-0.07{per_second}*BTRH;
    ode(BTRH, time) = dBTRH;
    dBTRL = 40000{per_millimolar_second}*Cai*(1{millimolar}-BTRL)-BTRL*40{per_second};
    ode(BTRL, time) = dBTRL;
    ode(Cass, time) = 1{dimensionless}/(1{dimensionless}+0.05{millimolar}*0.00238{millimolar}/sqr(0.00238{millimolar}+Cass))*(-(i_Cas+i_Cat)/(2{dimensionless}*F*Vd)+1{cm3}*JCaSRrel/Vd-1{cm3}*JCad/Vd);
    ode(Cai, time) = 1{dimensionless}/(1{dimensionless}+0.05{millimolar}*0.00238{millimolar}/sqr(0.00238{millimolar}+Cai))*((-2{dimensionless}*(i_NaCas+i_NaCat)+i_Cabs+i_Cabt+i_pCas+i_pCat)/(-2{dimensionless}*F*Vmyo)+1{cm3}*(JCad-JCaSRup)/Vmyo-dBTRH*0.14{dimensionless}-dBTRL*0.07{dimensionless});
    ode(Nai, time) = -(i_Nas+i_Nat+i_Nabs+i_Nabt+3{dimensionless}*i_NaCas+3{dimensionless}*i_NaCat+3{dimensionless}*i_NaKs+3{dimensionless}*i_NaKt)/(F*Vmyo);
    ode(Ki, time) = -(-i_Stim+i_Kfs+i_Kft+i_Ksts+i_Kstt+i_K1s+i_K1t+i_Kbs+i_Kbt-2{dimensionless}*i_NaKs-2{dimensionless}*i_NaKt+i_Ktos+i_Ktot)/(F*Vmyo);
    ode(Nat, time) = ((i_Nat+i_Nabt+3{dimensionless}*i_NaCat+3{dimensionless}*i_NaKt)/F-1{cm3}*JteNa)/Vt;
    ode(Cat, time) = ((-2{dimensionless}*i_NaCat+i_Cat+i_Cabt+i_pCat)/(2{dimensionless}*F)-1{cm3}*JteCa)/Vt;
    ode(Kt, time) = ((i_Kft+i_Kstt+i_K1t+i_Kbt-2{dimensionless}*i_NaKt+i_Ktot)/F-1{cm3}*JteK)/Vt;
  enddef;

  def comp Vms as
    var Vms: millivolt {init: -8.0370197e1, pub: out};
    var Cms: microF {pub: in};
    var i_circ: microA {pub: in};
    var i_Stim: microA {pub: in};
    var time: second {pub: in};
    var i_Nas: microA {pub: in};
    var i_Cas: microA {pub: in};
    var i_Ktos: microA {pub: in};
    var i_Ksts: microA {pub: in};
    var i_Kfs: microA {pub: in};
    var i_K1s: microA {pub: in};
    var i_Nabs: microA {pub: in};
    var i_Cabs: microA {pub: in};
    var i_Kbs: microA {pub: in};
    var i_NaKs: microA {pub: in};
    var i_NaCas: microA {pub: in};
    var i_pCas: microA {pub: in};
    ode(Vms, time) = 1000{nanoA_per_microA}*(i_Stim+i_circ-(i_Nas+i_Cas+i_Ktos+i_Ksts+i_Kfs+i_K1s+i_Nabs+i_Cabs+i_Kbs+i_NaKs+i_NaCas+i_pCas))/Cms;
  enddef;

  def comp Vmt as
    var Vmt: millivolt {init: -8.037019e1, pub: out};
    var Cmt: microF {pub: in};
    var i_circ: microA {pub: in};
    var time: second {pub: in};
    var i_Nat: microA {pub: in};
    var i_Cat: microA {pub: in};
    var i_Ktot: microA {pub: in};
    var i_Kstt: microA {pub: in};
    var i_Kft: microA {pub: in};
    var i_K1t: microA {pub: in};
    var i_Nabt: microA {pub: in};
    var i_Cabt: microA {pub: in};
    var i_Kbt: microA {pub: in};
    var i_NaKt: microA {pub: in};
    var i_NaCat: microA {pub: in};
    var i_pCat: microA {pub: in};
    ode(Vmt, time) = 1000{nanoA_per_microA}*(-(i_circ+i_Nat+i_Cat+i_Ktot+i_Kstt+i_Kft+i_K1t+i_Nabt+i_Cabt+i_Kbt+i_NaKt+i_NaCat+i_pCat))/Cmt;
  enddef;

  def group as encapsulation for
    comp i_Nas incl
      comp i_Nas_m_gate;
      comp i_Nas_h_gate;
    endcomp;
    comp i_Ksts incl
      comp i_Ksts_rsts_gate;
      comp i_Ksts_ssts_gate;
    endcomp;
    comp i_Ktos incl
      comp i_Ktos_rs_gate;
      comp i_Ktos_ss_gate;
      comp i_Ktos_sss_gate;
    endcomp;
    comp i_Kfs incl
      comp i_Kfs_qs_gate;
    endcomp;
    comp i_Nat incl
      comp i_Nat_m_gate;
      comp i_Nat_h_gate;
    endcomp;
    comp i_Kstt incl
      comp i_Kstt_rstt_gate;
      comp i_Kstt_sstt_gate;
    endcomp;
    comp i_Ktot incl
      comp i_Ktot_rt_gate;
      comp i_Ktot_st_gate;
      comp i_Ktot_sst_gate;
    endcomp;
    comp i_Kft incl
      comp i_Kft_qt_gate;
    endcomp;
  enddef;
  def map between i_Stim and environment for
    vars time and time;
  enddef;
  def map between i_Nas and environment for
    vars time and time;
  enddef;
  def map between i_Cas and environment for
    vars time and time;
  enddef;
  def map between i_Ksts and environment for
    vars time and time;
  enddef;
  def map between i_K1s and environment for
    vars time and time;
  enddef;
  def map between i_Kfs and environment for
    vars time and time;
  enddef;
  def map between i_Ktos and environment for
    vars time and time;
  enddef;
  def map between i_Nat and environment for
    vars time and time;
  enddef;
  def map between i_Cat and environment for
    vars time and time;
  enddef;
  def map between i_Kstt and environment for
    vars time and time;
  enddef;
  def map between i_K1t and environment for
    vars time and time;
  enddef;
  def map between i_Kft and environment for
    vars time and time;
  enddef;
  def map between i_Ktot and environment for
    vars time and time;
  enddef;
  def map between JCaSRrel and environment for
    vars time and time;
  enddef;
  def map between CaSRrel and environment for
    vars time and time;
  enddef;
  def map between CaSRup and environment for
    vars time and time;
  enddef;
  def map between Vms and environment for
    vars time and time;
  enddef;
  def map between Vmt and environment for
    vars time and time;
  enddef;
  def map between ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between model_parameters and i_circ for
    vars Rst and Rst;
  enddef;
  def map between model_parameters and membrane_permeabilities for
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between model_parameters and JCaSRup for
    vars Vmyo and Vmyo;
  enddef;
  def map between model_parameters and Jtr for
    vars VSRrel and VSRrel;
  enddef;
  def map between model_parameters and JCaSRrel for
    vars VSRrel and VSRrel;
  enddef;
  def map between model_parameters and JCad for
    vars Vmyo and Vmyo;
  enddef;
  def map between model_parameters and CaSRrel for
    vars VSRrel and VSRrel;
  enddef;
  def map between model_parameters and CaSRup for
    vars VSRup and VSRup;
  enddef;
  def map between model_parameters and ion_concentrations for
    vars F and F;
    vars Vmyo and Vmyo;
    vars Vd and Vd;
    vars Vt and Vt;
    vars VSRrel and VSRrel;
    vars VSRup and VSRup;
  enddef;
  def map between model_parameters and t_tubular_ion_fluxes for
    vars Vt and Vt;
    vars Nae and Nae;
    vars Ke and Ke;
    vars Cae and Cae;
  enddef;
  def map between model_parameters and Vms for
    vars Cms and Cms;
  enddef;
  def map between model_parameters and i_Nas for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Nae and Nae;
    vars Ke and Ke;
  enddef;
  def map between model_parameters and i_Cas for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cae and Cae;
  enddef;
  def map between model_parameters and i_Ktos for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ke and Ke;
  enddef;
  def map between model_parameters and i_K1s for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ke and Ke;
  enddef;
  def map between model_parameters and i_NaKs for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Nae and Nae;
    vars Ke and Ke;
  enddef;
  def map between model_parameters and i_NaCas for
    vars Nae and Nae;
    vars Cae and Cae;
  enddef;
  def map between model_parameters and Vmt for
    vars Cmt and Cmt;
  enddef;
  def map between model_parameters and i_Nat for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and i_Cat for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and i_Ktot for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and i_K1t for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and i_NaKt for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane_permeabilities and i_Nas for
    vars gNas and gNas;
  enddef;
  def map between membrane_permeabilities and i_Cas for
    vars gCas and gCas;
  enddef;
  def map between membrane_permeabilities and i_Ksts for
    vars gKsts and gKsts;
  enddef;
  def map between membrane_permeabilities and i_K1s for
    vars gK1s and gK1s;
  enddef;
  def map between membrane_permeabilities and i_Kfs for
    vars gKfs and gKfs;
  enddef;
  def map between membrane_permeabilities and i_Ktos for
    vars gKtos and gKtos;
  enddef;
  def map between membrane_permeabilities and i_Nabs for
    vars gNabs and gNabs;
  enddef;
  def map between membrane_permeabilities and i_Cabs for
    vars gCabs and gCabs;
  enddef;
  def map between membrane_permeabilities and i_Kbs for
    vars gKbs and gKbs;
  enddef;
  def map between membrane_permeabilities and i_NaCas for
    vars i_NaCa_maxs and i_NaCa_maxs;
  enddef;
  def map between membrane_permeabilities and i_NaKs for
    vars i_NaK_maxs and i_NaK_maxs;
  enddef;
  def map between membrane_permeabilities and i_pCas for
    vars i_pCa_maxs and i_pCa_maxs;
  enddef;
  def map between membrane_permeabilities and i_Nat for
    vars gNat and gNat;
  enddef;
  def map between membrane_permeabilities and i_Cat for
    vars gCat and gCat;
  enddef;
  def map between membrane_permeabilities and i_Kstt for
    vars gKstt and gKstt;
  enddef;
  def map between membrane_permeabilities and i_K1t for
    vars gK1t and gK1t;
  enddef;
  def map between membrane_permeabilities and i_Kft for
    vars gKft and gKft;
  enddef;
  def map between membrane_permeabilities and i_Ktot for
    vars gKtot and gKtot;
  enddef;
  def map between membrane_permeabilities and i_Nabt for
    vars gNabt and gNabt;
  enddef;
  def map between membrane_permeabilities and i_Cabt for
    vars gCabt and gCabt;
  enddef;
  def map between membrane_permeabilities and i_Kbt for
    vars gKbt and gKbt;
  enddef;
  def map between membrane_permeabilities and i_NaCat for
    vars i_NaCa_maxt and i_NaCa_maxt;
  enddef;
  def map between membrane_permeabilities and i_NaKt for
    vars i_NaK_maxt and i_NaK_maxt;
  enddef;
  def map between membrane_permeabilities and i_pCat for
    vars i_pCa_maxt and i_pCa_maxt;
  enddef;
  def map between i_circ and Vms for
    vars i_circ and i_circ;
    vars Vms and Vms;
  enddef;
  def map between i_Stim and Vms for
    vars i_Stim and i_Stim;
  enddef;
  def map between i_circ and Vmt for
    vars i_circ and i_circ;
    vars Vmt and Vmt;
  enddef;
  def map between JCaSRup and ion_concentrations for
    vars JCaSRup and JCaSRup;
    vars Cai and Cai;
  enddef;
  def map between CaSRup and JCaSRup for
    vars JCaSRup and JCaSRup;
    vars CaSRup and CaSRup;
  enddef;
  def map between Jtr and ion_concentrations for
    vars Jtr and Jtr;
  enddef;
  def map between Jtr and CaSRrel for
    vars Jtr and Jtr;
    vars CaSRrel and CaSRrel;
  enddef;
  def map between Jtr and CaSRup for
    vars Jtr and Jtr;
    vars CaSRup and CaSRup;
  enddef;
  def map between JCaSRrel and ion_concentrations for
    vars JCaSRrel and JCaSRrel;
    vars Cass and Cass;
  enddef;
  def map between JCaSRrel and CaSRrel for
    vars JCaSRrel and JCaSRrel;
    vars CaSRrel and CaSRrel;
  enddef;
  def map between JCad and ion_concentrations for
    vars JCad and JCad;
    vars Cai and Cai;
    vars Cass and Cass;
  enddef;
  def map between ion_concentrations and i_Stim for
    vars i_Stim and i_Stim;
  enddef;
  def map between ion_concentrations and i_Nas for
    vars i_Nas and i_Nas;
    vars Nai and Nai;
    vars Ki and Ki;
  enddef;
  def map between ion_concentrations and i_Cas for
    vars i_Cas and i_Cas;
    vars Cass and Cass;
    vars Cai and Cai;
  enddef;
  def map between ion_concentrations and i_Ksts for
    vars i_Ksts and i_Ksts;
  enddef;
  def map between ion_concentrations and i_Kfs for
    vars i_Kfs and i_Kfs;
  enddef;
  def map between ion_concentrations and i_K1s for
    vars i_K1s and i_K1s;
  enddef;
  def map between ion_concentrations and i_Ktos for
    vars i_Ktos and i_Ktos;
    vars Ki and Ki;
  enddef;
  def map between ion_concentrations and i_Nabs for
    vars i_Nabs and i_Nabs;
  enddef;
  def map between ion_concentrations and i_Cabs for
    vars i_Cabs and i_Cabs;
  enddef;
  def map between ion_concentrations and i_Kbs for
    vars i_Kbs and i_Kbs;
  enddef;
  def map between ion_concentrations and i_NaKs for
    vars i_NaKs and i_NaKs;
    vars Nai and Nai;
  enddef;
  def map between ion_concentrations and i_pCas for
    vars i_pCas and i_pCas;
    vars Cai and Cai;
  enddef;
  def map between ion_concentrations and i_NaCas for
    vars i_NaCas and i_NaCas;
    vars Nai and Nai;
    vars Cai and Cai;
  enddef;
  def map between ion_concentrations and i_Nat for
    vars i_Nat and i_Nat;
    vars Nai and Nai;
    vars Ki and Ki;
    vars Nat and Nat;
    vars Kt and Kt;
  enddef;
  def map between ion_concentrations and i_Cat for
    vars i_Cat and i_Cat;
    vars Cass and Cass;
    vars Cai and Cai;
    vars Cat and Cat;
  enddef;
  def map between ion_concentrations and i_Kstt for
    vars i_Kstt and i_Kstt;
  enddef;
  def map between ion_concentrations and i_Kft for
    vars i_Kft and i_Kft;
  enddef;
  def map between ion_concentrations and i_K1t for
    vars i_K1t and i_K1t;
    vars Kt and Kt;
  enddef;
  def map between ion_concentrations and i_Ktot for
    vars i_Ktot and i_Ktot;
    vars Ki and Ki;
    vars Kt and Kt;
  enddef;
  def map between ion_concentrations and i_Nabt for
    vars i_Nabt and i_Nabt;
  enddef;
  def map between ion_concentrations and i_Cabt for
    vars i_Cabt and i_Cabt;
  enddef;
  def map between ion_concentrations and i_Kbt for
    vars i_Kbt and i_Kbt;
  enddef;
  def map between ion_concentrations and i_NaKt for
    vars i_NaKt and i_NaKt;
    vars Nai and Nai;
    vars Nat and Nat;
    vars Kt and Kt;
  enddef;
  def map between ion_concentrations and i_pCat for
    vars i_pCat and i_pCat;
    vars Cai and Cai;
  enddef;
  def map between ion_concentrations and i_NaCat for
    vars i_NaCat and i_NaCat;
    vars Nai and Nai;
    vars Cai and Cai;
    vars Nat and Nat;
    vars Cat and Cat;
  enddef;
  def map between ion_concentrations and t_tubular_ion_fluxes for
    vars Nat and Nat;
    vars Cat and Cat;
    vars Kt and Kt;
    vars JteNa and JteNa;
    vars JteCa and JteCa;
    vars JteK and JteK;
  enddef;
  def map between Vms and i_Nas for
    vars Vms and Vms;
    vars i_Nas and i_Nas;
  enddef;
  def map between Vms and i_Cas for
    vars Vms and Vms;
    vars i_Cas and i_Cas;
  enddef;
  def map between Vms and i_Ksts for
    vars Vms and Vms;
    vars i_Ksts and i_Ksts;
  enddef;
  def map between Vms and i_K1s for
    vars Vms and Vms;
    vars i_K1s and i_K1s;
  enddef;
  def map between Vms and i_Kfs for
    vars Vms and Vms;
    vars i_Kfs and i_Kfs;
  enddef;
  def map between Vms and i_Ktos for
    vars Vms and Vms;
    vars i_Ktos and i_Ktos;
  enddef;
  def map between Vms and i_Nabs for
    vars Vms and Vms;
    vars i_Nabs and i_Nabs;
  enddef;
  def map between Vms and i_Cabs for
    vars Vms and Vms;
    vars i_Cabs and i_Cabs;
  enddef;
  def map between Vms and i_Kbs for
    vars Vms and Vms;
    vars i_Kbs and i_Kbs;
  enddef;
  def map between Vms and i_NaKs for
    vars Vms and Vms;
    vars i_NaKs and i_NaKs;
  enddef;
  def map between Vms and i_pCas for
    vars i_pCas and i_pCas;
  enddef;
  def map between Vms and i_NaCas for
    vars Vms and Vms;
    vars i_NaCas and i_NaCas;
  enddef;
  def map between Vmt and i_Nat for
    vars Vmt and Vmt;
    vars i_Nat and i_Nat;
  enddef;
  def map between Vmt and i_Cat for
    vars Vmt and Vmt;
    vars i_Cat and i_Cat;
  enddef;
  def map between Vmt and i_Kstt for
    vars Vmt and Vmt;
    vars i_Kstt and i_Kstt;
  enddef;
  def map between Vmt and i_K1t for
    vars Vmt and Vmt;
    vars i_K1t and i_K1t;
  enddef;
  def map between Vmt and i_Kft for
    vars Vmt and Vmt;
    vars i_Kft and i_Kft;
  enddef;
  def map between Vmt and i_Ktot for
    vars Vmt and Vmt;
    vars i_Ktot and i_Ktot;
  enddef;
  def map between Vmt and i_Nabt for
    vars Vmt and Vmt;
    vars i_Nabt and i_Nabt;
  enddef;
  def map between Vmt and i_Cabt for
    vars Vmt and Vmt;
    vars i_Cabt and i_Cabt;
  enddef;
  def map between Vmt and i_Kbt for
    vars Vmt and Vmt;
    vars i_Kbt and i_Kbt;
  enddef;
  def map between Vmt and i_NaKt for
    vars Vmt and Vmt;
    vars i_NaKt and i_NaKt;
  enddef;
  def map between Vmt and i_pCat for
    vars i_pCat and i_pCat;
  enddef;
  def map between Vmt and i_NaCat for
    vars Vmt and Vmt;
    vars i_NaCat and i_NaCat;
  enddef;
  def map between i_Ksts and i_Ktos for
    vars E_Ks and E_Ks;
  enddef;
  def map between i_Kfs and i_Ktos for
    vars E_Ks and E_Ks;
  enddef;
  def map between i_K1s and i_Ktos for
    vars E_Ks and E_Ks;
  enddef;
  def map between i_Kbs and i_Ktos for
    vars E_Ks and E_Ks;
  enddef;
  def map between i_Nas and i_Nabs for
    vars E_Nas and E_Nas;
  enddef;
  def map between i_Nas and i_Kfs for
    vars E_Nas and E_Nas;
  enddef;
  def map between i_Cas and i_Cabs for
    vars E_Cas and E_Cas;
  enddef;
  def map between i_Kstt and i_Ktot for
    vars E_Kt and E_Kt;
  enddef;
  def map between i_Kft and i_Ktot for
    vars E_Kt and E_Kt;
  enddef;
  def map between i_K1t and i_Ktot for
    vars E_Kt and E_Kt;
  enddef;
  def map between i_Kbt and i_Ktot for
    vars E_Kt and E_Kt;
  enddef;
  def map between i_Nat and i_Nabt for
    vars E_Nat and E_Nat;
  enddef;
  def map between i_Nat and i_Kft for
    vars E_Nat and E_Nat;
  enddef;
  def map between i_Cat and i_Cabt for
    vars E_Cat and E_Cat;
  enddef;
  def map between i_Nas and i_Nas_m_gate for
    vars m and m;
    vars time and time;
    vars Vms and Vms;
  enddef;
  def map between i_Nas and i_Nas_h_gate for
    vars h and h;
    vars time and time;
    vars Vms and Vms;
  enddef;
  def map between i_Ksts and i_Ksts_rsts_gate for
    vars rsts and rsts;
    vars time and time;
    vars Vms and Vms;
  enddef;
  def map between i_Ksts and i_Ksts_ssts_gate for
    vars ssts and ssts;
    vars time and time;
    vars Vms and Vms;
  enddef;
  def map between i_Ktos and i_Ktos_rs_gate for
    vars rs and rs;
    vars time and time;
    vars Vms and Vms;
  enddef;
  def map between i_Ktos and i_Ktos_ss_gate for
    vars ss and ss;
    vars time and time;
    vars Vms and Vms;
  enddef;
  def map between i_Ktos and i_Ktos_sss_gate for
    vars sss and sss;
    vars time and time;
    vars Vms and Vms;
  enddef;
  def map between i_Kfs and i_Kfs_qs_gate for
    vars qs and qs;
    vars time and time;
    vars Vms and Vms;
  enddef;
  def map between i_Nat and i_Nat_m_gate for
    vars m and m;
    vars time and time;
    vars Vmt and Vmt;
  enddef;
  def map between i_Nat and i_Nat_h_gate for
    vars h and h;
    vars time and time;
    vars Vmt and Vmt;
  enddef;
  def map between i_Kstt and i_Kstt_rstt_gate for
    vars rstt and rstt;
    vars time and time;
    vars Vmt and Vmt;
  enddef;
  def map between i_Kstt and i_Kstt_sstt_gate for
    vars sstt and sstt;
    vars time and time;
    vars Vmt and Vmt;
  enddef;
  def map between i_Ktot and i_Ktot_rt_gate for
    vars rt and rt;
    vars time and time;
    vars Vmt and Vmt;
  enddef;
  def map between i_Ktot and i_Ktot_st_gate for
    vars st and st;
    vars time and time;
    vars Vmt and Vmt;
  enddef;
  def map between i_Ktot and i_Ktot_sst_gate for
    vars sst and sst;
    vars time and time;
    vars Vmt and Vmt;
  enddef;
  def map between i_Kft and i_Kft_qt_gate for
    vars qt and qt;
    vars time and time;
    vars Vmt and Vmt;
  enddef;
enddef;
