<?xml version='1.0' encoding='utf-8'?>
<!--
This CellML file was generated on 6/08/2008 at 1:05:17 at p.m. using:

COR (0.9.31.979)
Copyright 2002-2008 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="razumova_bukatina_campbell_1999" cmeta:id="razumova_bukatina_campbell_1999">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Stiffness-distortion sacromere model for muscle stimulation</title>
				<author>
					<firstname>Geoffrey</firstname>
					<surname>Nunns</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This model runs in OpenCell and COR, and the units are consistent throughout. It is not yet an accurate match for the experimental results.   
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
Abstract: A relatively simple method is presented for incorporating cross-bridge mechanisms into a muscle model. The method is based on representing force in a half sarcomere as the product of the stiffness of all parallel cross bridges and their average distortion. Differential equations for sarcomeric stiffness are derived from a three-state kinetic scheme for the cross-bridge cycle. Differential equations for average distortion are derived from a distortional balance that accounts for distortion entering and leaving due to cross-bridge cycling and for distortion imposed by shearing motion between thick and thin filaments. The distortion equations are unique and enable sarcomere mechanodynamics to be described by only a few ordinary differential equations. Model predictions of small-amplitude step and sinusoidal responses agreed well with previously described experimental results and allowed unique interpretations to be made of various response components. Similarly good results were obtained for model reproductions of force-velocity and large-amplitude step and ramp responses. The model allowed reasonable predictions of contractile behavior by taking into account what is understood to be basic muscle contractile mechanisms. </para>
				<para>
				
<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="razumova_1999.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram of myofilament regulation and cross-bridge cycling giving rise to stiffness and distortion dynamics of sarcomere. Actin thin-filament possessing the myosin-binding site is represented by chain of 3 circles (no stoichiometric relations are implied by 3 circles). Thin-filament regulatory tropomyosin-troponin complex, controlling myosin cross-bridge access to the thin-filament binding site, is represented by the bar spanning the binding site. Myosin cross bridge is represented by the globular head with coiled tail. Thin-filament regulatory unit may be in 1 of 2 steric configurations: the "off" position (Roff) or the "on" position. The on state may have different status depending on whether cross bridges are attached or not including "on" and cross bridges detached (D) and "on" and cross bridges attached (A1, A2). Attached cross bridges may be pre-power stroke (A1) or post-power stroke (A2). Cross bridge attachment, power stroke, and detachment occur cyclically. Steps in the cycle are governed by rate coefficients f, f ', h, h', g, where the forward attachment is governed by f, the forward power stroke is governed by h, and cross-bridge detachment is governed by g. Primes designate reverse reactions.</caption>
</informalfigure>				
				
The original paper reference is cited below:
</para>
				<para>
			Stiffness-distortion sacromere model for muscle stimulation, Maria V. Razumova, Anna E. Bukatina, Kenneth B. Campbell, 1999, <emphasis>Journal of Applied Physiology</emphasis>, 87, 1861-1876. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=10562631&amp;dopt=Abstract">PubMed ID: 10562631  </ulink>
				</para>
			</sect1>
		</article>
	</documentation>   
	
	<units name="per_second">
      <unit units="second" exponent="-1"/>
   </units>
   <component name="environment">
      <variable units="second" public_interface="out" name="time"/>
   </component>
   <component name="equations">
      <variable units="dimensionless" name="D" initial_value="0.005"/>
      <variable units="dimensionless" name="A_1" initial_value="0.005"/>
      <variable units="dimensionless" name="A_2" initial_value="0.005"/>
      <variable units="dimensionless" name="R_off"/>
      <variable units="dimensionless" name="x_0" initial_value="1e-16"/>
      <variable units="dimensionless" name="x_1" initial_value="1e-16"/>
      <variable units="dimensionless" name="x_2" initial_value="1e-16"/>
      <variable units="per_second" name="g"/>
      <variable units="per_second" name="f"/>
      <variable units="per_second" name="h"/>
      <variable units="dimensionless" name="lambda_A1"/>
      <variable units="dimensionless" name="lambda_A2"/>
      <variable units="dimensionless" name="F_t"/>
      <variable units="dimensionless" name="E_1"/>
      <variable units="dimensionless" name="E_2"/>
      <variable units="per_second" name="dSL_dt"/>
      <variable units="dimensionless" name="SL" initial_value="2"/>
      <variable units="second" public_interface="in" name="time"/>
      <variable units="per_second" name="k_on" initial_value="120"/>
      <variable units="per_second" name="k_off" initial_value="50"/>
      <variable units="per_second" name="f_r" initial_value="50"/>
      <variable units="per_second" name="f_prime"/>
      <variable units="per_second" name="f_prime_0" initial_value="400"/>
      <variable units="per_second" name="h_0" initial_value="8"/>
      <variable units="per_second" name="h_prime"/>
      <variable units="per_second" name="h_prime_0" initial_value="6"/>
      <variable units="per_second" name="g_0" initial_value="4"/>
      <variable units="dimensionless" name="nu" initial_value="3"/>
      <variable units="dimensionless" name="sigma"/>
      <variable units="dimensionless" name="sigma_minus" initial_value="1"/>
      <variable units="dimensionless" name="sigma_plus" initial_value="8"/>
      <variable units="dimensionless" name="R_T" initial_value="1"/>
      <variable units="dimensionless" name="e_cb" initial_value="1.5"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>D</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>k_on</ci>
                     <ci>R_off</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>f_prime</ci>
                     <ci>A_1</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>g</ci>
                     <ci>A_2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <ci>k_off</ci>
                     <ci>f</ci>
                  </apply>
                  <ci>D</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>A_1</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>f</ci>
                     <ci>D</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>h_prime</ci>
                     <ci>A_2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <ci>f_prime</ci>
                     <ci>h</ci>
                  </apply>
                  <ci>A_1</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>A_2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>h</ci>
                  <ci>A_1</ci>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <ci>h_prime</ci>
                     <ci>g</ci>
                  </apply>
                  <ci>A_2</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>R_off</ci>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <ci>R_T</ci>
                     <ci>D</ci>
                  </apply>
                  <ci>A_1</ci>
               </apply>
               <ci>A_2</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x_2</ci>
            </apply>
            <piecewise>
               <piece>
                  <ci>dSL_dt</ci>
                  <apply>
                     <eq/>
                     <ci>A_2</ci>
                     <cn cellml:units="dimensionless">0</cn>
                  </apply>
               </piece>
               <otherwise>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <apply>
                           <divide/>
                           <apply>
                              <times/>
                              <apply>
                                 <minus/>
                                 <ci>h</ci>
                              </apply>
                              <ci>A_1</ci>
                           </apply>
                           <ci>A_2</ci>
                        </apply>
                        <apply>
                           <minus/>
                           <ci>x_2</ci>
                           <ci>x_0</ci>
                        </apply>
                     </apply>
                     <ci>dSL_dt</ci>
                  </apply>
               </otherwise>
            </piecewise>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x_1</ci>
            </apply>
            <piecewise>
               <piece>
                  <ci>dSL_dt</ci>
                  <apply>
                     <eq/>
                     <ci>A_1</ci>
                     <cn cellml:units="dimensionless">0</cn>
                  </apply>
               </piece>
               <otherwise>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <apply>
                                 <divide/>
                                 <apply>
                                    <times/>
                                    <ci>f</ci>
                                    <ci>D</ci>
                                 </apply>
                                 <ci>A_1</ci>
                              </apply>
                              <apply>
                                 <divide/>
                                 <apply>
                                    <times/>
                                    <ci>h_prime</ci>
                                    <ci>A_2</ci>
                                 </apply>
                                 <ci>A_1</ci>
                              </apply>
                           </apply>
                        </apply>
                        <ci>x_1</ci>
                     </apply>
                     <ci>dSL_dt</ci>
                  </apply>
               </otherwise>
            </piecewise>
         </apply>
         <apply>
            <eq/>
            <ci>lambda_A1</ci>
            <apply>
               <divide/>
               <ci>A_1</ci>
               <ci>R_T</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>lambda_A2</ci>
            <apply>
               <divide/>
               <ci>A_2</ci>
               <ci>R_T</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>F_t</ci>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <ci>E_1</ci>
                  <ci>x_1</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>E_2</ci>
                  <ci>x_2</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>E_1</ci>
            <apply>
               <times/>
               <ci>e_cb</ci>
               <ci>A_1</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>E_2</ci>
            <apply>
               <times/>
               <ci>e_cb</ci>
               <ci>A_2</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>g</ci>
            <apply>
               <times/>
               <ci>g_0</ci>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <ci>sigma</ci>
                     <apply>
                        <power/>
                        <apply>
                           <minus/>
                           <ci>x_2</ci>
                           <ci>x_0</ci>
                        </apply>
                        <cn cellml:units="dimensionless">2</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>h</ci>
            <apply>
               <times/>
               <ci>h_0</ci>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <ci>sigma</ci>
                     <apply>
                        <power/>
                        <ci>x_1</ci>
                        <cn cellml:units="dimensionless">2</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>f_prime</ci>
            <apply>
               <times/>
               <ci>f_prime_0</ci>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <ci>sigma</ci>
                     <apply>
                        <power/>
                        <ci>x_1</ci>
                        <cn cellml:units="dimensionless">2</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>h_prime</ci>
            <apply>
               <times/>
               <ci>h_prime_0</ci>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <ci>sigma</ci>
                     <apply>
                        <minus/>
                        <apply>
                           <power/>
                           <ci>x_2</ci>
                           <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                           <power/>
                           <ci>x_1</ci>
                           <cn cellml:units="dimensionless">2</cn>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>sigma</ci>
            <piecewise>
               <piece>
                  <ci>sigma_plus</ci>
                  <apply>
                     <gt/>
                     <ci>x_2</ci>
                     <ci>x_0</ci>
                  </apply>
               </piece>
               <piece>
                  <ci>sigma_minus</ci>
                  <apply>
                     <lt/>
                     <ci>x_2</ci>
                     <ci>x_0</ci>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="dimensionless">0</cn>
               </otherwise>
            </piecewise>
         </apply>
         <apply>
            <eq/>
            <ci>f</ci>
            <apply>
               <times/>
               <ci>f_r</ci>
               <apply>
                  <power/>
                  <apply>
                     <plus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <times/>
                        <ci>lambda_A1</ci>
                        <apply>
                           <minus/>
                           <apply>
                              <exp/>
                              <apply>
                                 <times/>
                                 <apply>
                                    <divide/>
                                    <ci>x_1</ci>
                                    <ci>x_0</ci>
                                 </apply>
                                 <apply>
                                    <minus/>
                                    <ci>nu</ci>
                                    <cn cellml:units="dimensionless">1</cn>
                                 </apply>
                              </apply>
                           </apply>
                           <cn cellml:units="dimensionless">1</cn>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>lambda_A2</ci>
                        <apply>
                           <minus/>
                           <apply>
                              <exp/>
                              <apply>
                                 <times/>
                                 <apply>
                                    <divide/>
                                    <ci>x_2</ci>
                                    <ci>x_0</ci>
                                 </apply>
                                 <apply>
                                    <minus/>
                                    <ci>nu</ci>
                                    <cn cellml:units="dimensionless">1</cn>
                                 </apply>
                              </apply>
                           </apply>
                           <cn cellml:units="dimensionless">1</cn>
                        </apply>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">2</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>dSL_dt</ci>
            <piecewise>
               <piece>
                  <cn cellml:units="per_second">21.2</cn>
                  <apply>
                     <and/>
                     <apply>
                        <gt/>
                        <ci>time</ci>
                        <cn cellml:units="second">0.001</cn>
                     </apply>
                     <apply>
                        <lt/>
                        <ci>time</ci>
                        <cn cellml:units="second">0.002</cn>
                     </apply>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="per_second">0</cn>
               </otherwise>
            </piecewise>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>SL</ci>
            </apply>
            <ci>dSL_dt</ci>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_2="equations" component_1="environment"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#61c27fc7-1e8d-4a7f-90f7-b1b83627aa8e">
    <rdf:li rdf:resource="rdf:#eec1b0db-f1e3-415b-9ed1-4aa20847dadd"/>
    <rdf:li rdf:resource="rdf:#43d69569-8b24-4b17-ac7f-a92af4103547"/>
    <rdf:li rdf:resource="rdf:#8e436f8f-9b06-49db-8172-635ac41d4e85"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#dd051d58-2634-469b-a7d4-6230acabeff0">
    <vCard:ORG rdf:resource="rdf:#1bd1d9b7-b81d-48cd-9da1-dc0d135d82f8"/>
    <vCard:EMAIL rdf:resource="rdf:#87a3d75b-093f-49f5-bdd7-a9b50ffd6500"/>
    <vCard:N rdf:resource="rdf:#e2953c5e-9b1c-432d-8266-d346c64a6baa"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#eec1b0db-f1e3-415b-9ed1-4aa20847dadd">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#fe73e882-67ec-492f-8ab3-cb17f97a5a2f"/>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher/>
    <cmeta:comment rdf:resource="rdf:#e5425559-b4d4-4ae3-b8c2-c632a0a2aa7b"/>
    <dcterms:created rdf:resource="rdf:#3da62c87-1db4-4720-a3cf-c66938a981aa"/>
    <dc:creator rdf:resource="rdf:#dd051d58-2634-469b-a7d4-6230acabeff0"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8e436f8f-9b06-49db-8172-635ac41d4e85">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#c33c5a33-9ecf-4137-bc54-f497eb2266c6"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ece70108-e563-4452-872c-ca39cc2d6c2e">
    <dc:creator rdf:resource="rdf:#d2884a10-724d-4c47-8e82-a19817a18d75"/>
    <rdf:value>This model runs in PCEnv and COR, and the units are consistent throughout. It is not yet an accurate match for the experimental results.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fe73e882-67ec-492f-8ab3-cb17f97a5a2f">
    <vCard:Given>Maria</vCard:Given>
    <vCard:Family>Razumova</vCard:Family>
    <vCard:Other>V</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#61a079fd-869c-466e-bb51-14572493c13e">
    <bqs:Pubmed_id>10562631</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#8a4ba94b-f40f-4686-a252-1b1bca7911f1"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d2884a10-724d-4c47-8e82-a19817a18d75">
    <vCard:FN>Geoff Nunns</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6c720094-73a0-49b2-a600-4b7f7e780d97">
    <dcterms:W3CDTF>1999-11-00 00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1bd1d9b7-b81d-48cd-9da1-dc0d135d82f8">
    <vCard:Orgname>Auckland Bioengineering Institute</vCard:Orgname>
    <vCard:Orgunit>CellML Team</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e5425559-b4d4-4ae3-b8c2-c632a0a2aa7b">
    <dc:creator rdf:resource="rdf:#00f5bbfc-b50e-4efd-90d2-cb14cdf0615b"/>
    <rdf:value>This model runs in PCEnv and COR, and the units are consistent throughout. It is not yet an accurate match for the experimental results.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="#razumova_bukatina_campbell_1999">
    <bqs:reference rdf:resource="rdf:#61a079fd-869c-466e-bb51-14572493c13e"/>
<bqs:reference rdf:parseType="Resource">
  <dc:subject rdf:parseType="Resource">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value>
      <rdf:Bag>
        <rdf:li>electrophysiology</rdf:li>
        <rdf:li>sacromere</rdf:li>
      </rdf:Bag>
    </rdf:value>
  </dc:subject>
</bqs:reference>
    <cmeta:comment rdf:resource="rdf:#ece70108-e563-4452-872c-ca39cc2d6c2e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#87a3d75b-093f-49f5-bdd7-a9b50ffd6500">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>gnunns1@jhem.jhu.edu</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#00f5bbfc-b50e-4efd-90d2-cb14cdf0615b">
    <vCard:FN>Geoff Nunns</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e2953c5e-9b1c-432d-8266-d346c64a6baa">
    <vCard:Given>Geoffrey</vCard:Given>
    <vCard:Family>Nunns</vCard:Family>
    <vCard:Other>Rogan</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c33c5a33-9ecf-4137-bc54-f497eb2266c6">
    <vCard:Given>Kenneth</vCard:Given>
    <vCard:Family>Campbell</vCard:Family>
    <vCard:Other>B</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c15d4631-bb00-4391-8762-e59ea4e549f4">
    <dc:title>Journal of Applied Physiology</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#43d69569-8b24-4b17-ac7f-a92af4103547">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#d6edb0ce-a918-447e-894b-44c9efb0775b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d6edb0ce-a918-447e-894b-44c9efb0775b">
    <vCard:Given>Anna</vCard:Given>
    <vCard:Family>Bukatina</vCard:Family>
    <vCard:Other>E</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8a4ba94b-f40f-4686-a252-1b1bca7911f1">
    <dc:creator rdf:resource="rdf:#61c27fc7-1e8d-4a7f-90f7-b1b83627aa8e"/>
    <dc:title>Stiffness-distortion sacromere model for muscle stimulation</dc:title>
    <bqs:volume>87</bqs:volume>
    <bqs:first_page>1861</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#c15d4631-bb00-4391-8762-e59ea4e549f4"/>
    <dcterms:issued rdf:resource="rdf:#6c720094-73a0-49b2-a600-4b7f7e780d97"/>
    <bqs:last_page>1876</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3da62c87-1db4-4720-a3cf-c66938a981aa">
    <dcterms:W3CDTF>2008-07-27T00:00:00+12:00</dcterms:W3CDTF>
  </rdf:Description>
</rdf:RDF>
</model>