//   FILE :  RJW_model_1999_raw.xml
//
// CREATED :  21st May 2007
//
// LAST MODIFIED : 21st May 2007
//
// AUTHOR :  Catherine Lloyd
//           The Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.1 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Rice et al's 1999 model of the functional Ca2+ release unit.
//
// CHANGES:
// publisher: The University of Auckland, Bioengineering Institute
// created: W3CDTF 2002-06-29
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2007-06-05T10:02:36+12:00; The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics. This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology. The model does not run in the PCEnv simulator because it is underconstrained. Not sure why or what is missing. It may be that all the channel states sum to 1 (probabilities of being open or closed) and therefore maybe one should be calculated by subtracting the sum of all the other channel states from 1?; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2003-09-11; Fixed "J_RyR_calculation".; Given Autumn; Family Cuellar; Other A
// title: The Rice et al. 1999 model of the functional Ca2+ release unit.
// bio_entity: Cardiac Myocyte
// comment: FN Catherine Lloyd; This is the CellML description of Rice et al's model of the functional Ca2+ release unit.
// reference: subject_type keyword; diadic space; calcium dynamics; cardiac myocyte; Cardiac Myocyte; electrophysiology; gradedness; gain; cardiac
// reference: Pubmed_id 10512809; Given John; Family Rice; Other Jeremy; Given Raimond; Family Winslow; Other L; Given M; Family Jafri; Other Saleet; title Modeling Gain and Gradedness of Ca2+ Release in the Functional Unit of the Cardiac Diadic Space; volume 77; first_page 1871; title Biophysical Journal; W3CDTF 1999-10-01; last_page 1884
def model rice_winslow_jafri_1999_version01 as
  // Modelling the Functional Ca2+ Release Unit
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Structure
  //
  // Calcium-induced calcium release (CICR) in cardiac muscle displays both gradedness and high gain. It is graded because release of Ca2+ from the sarcoplasmic reticulum (SR) is proportional to the influx of trigger Ca2+, and high gain refers to the observation that Ca2+ release from the SR is much greater than the trigger influx. Inherent to such high-gain systems is positive feedback, which causes an all-or-nothing response rather than graded Ca2+ release. Such behaviour is predicted by all mathematical models in which sarcolemmal Ca2+ influx and SR Ca2+ release are directed into a single compartment, or common pool model.
  //
  // The previous (1998) model of cardiac calcium handling, (see Jafri-Rice-Winslow Ventricular Model, 1998 (${HTML_EXMPL_JRW_MODEL})) by the authors was an example of a common pool model. While it was able to simulate frequency-dependent aspects of cardiac Ca2+ cycling and high gain, it also displayed an all-or-none rather than a graded Ca2+ release. By contrast, their 1999 model (see the figure below) is based on functional release units (FRUs) formulated from one sarcolemmal dihydropyridine receptor (DHPR), eight ryanodine receptor (RyR) channels, and the volume (subspace) surrounding them. It is assumed that a variable number of independent FRUs can be recruited to produce graded Ca2+ release. Voltage-gated DHPR channels open adjacent RyRs via a localised increase in [Ca2+].
  //
  // Results obtained with the stochastic model suggest that high gain and gradedness can occur by the recruitment of independent FRUs without requiring spatial [Ca2+] gradients within a functional unit, or coupling between adjacent units.
  //
  // The complete original paper reference is cited below:
  //
  // Modeling Gain and Gradedness of Ca2+ Release in the Functional Unit of the Cardiac Diadic Space (http://www.biophysj.org/cgi/content/abstract/77/4/1871) John J. Rice, Saleet Jafri and Raimond L. Winslow, 1999, Biophysical Journal (http://www.biophysj.org/), 77, 1871-1884. (Full text (http://www.biophysj.org/cgi/content/full/77/4/1871) and PDF (http://www.biophysj.org/cgi/reprint/77/4/1871.pdf) versions of the article are available for Journal Members on the Biophysical Journal website.) PubMed ID: 10512809 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=10512809&dopt=Abstract)
  //
  // cell_diagram
  //
  // A) Schematic diagram of the functional release unit model. B) State diagram of the DHPR Channel. C) State diagram of the RyR channel.
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit cm_per_millisecond as
    unit metre {pref: centi};
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit per_micromolar as
    unit micromolar {expo: -1};
  enddef;
  def unit flux as
    unit micromolar;
    unit second {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit second {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit micromolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {pref: micro, expo: -1};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit micro_litre as
    unit litre {pref: micro};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp sarcolemma as
    var V: millivolt {pub: out, init: -84.624};
    var R: joule_per_mole_kelvin {pub: out, init: 8.314};
    var T: kelvin {pub: out, init: 310.0};
    var F: coulomb_per_mole {pub: out, init: 96500.0};
    var Ca_o: millimolar {pub: out, init: 1.8};
  enddef;

  def comp subspace as
    var V_SS: micro_litre {pub: out, init: 2.03E-12};
    var J_RyR: flux {pub: out};
    var Ca_SS: micromolar {pub: out};
    var J_DHPR: flux;
    var DHPR_open: dimensionless;
    var RyR_open: dimensionless;
    var I_DHPR: microA_per_microF;
    var J_RyR_perm: first_order_rate_constant {init: 3960.0};
    var beta_SS: micromolar;
    var B_SR: micromolar {init: 47.0};
    var K_BSR: micromolar {init: 0.87};
    var B_SL: micromolar {init: 1124.0};
    var K_BSL: micromolar {init: 8.7};
    var P_Ca: cm_per_millisecond {init: 1.51E-11};
    var J_xfer: flux;
    var tau_xfer: millisecond {init: 0.0007};
    var Ca_myo: micromolar {init: 0.1};
    var i: dimensionless {init: 0.0};
    var V_myo: micro_litre {init: 0.1};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Ca_o: millimolar {pub: in};
    var O: millimolar {pub: in};
    var O_Ca: millimolar {pub: in};
    var P_O3: millimolar {pub: in};
    var P_O4: millimolar {pub: in};
    var Ca_JSR: micromolar {pub: in};
    J_xfer = 1.0{dimensionless}/tau_xfer*(Ca_SS-Ca_myo);
    J_DHPR = I_DHPR*DHPR_open/(2.0{dimensionless}*F*V_SS);
    I_DHPR = P_Ca*4.0{dimensionless}*(V*sqr(F)/(R*T))*((0.001{dimensionless}*exp(2.0{dimensionless}*V*F/(R*T))-0.341{dimensionless}*Ca_o)/(exp(2.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    DHPR_open = sel
      case (i == O) or (i == O_Ca):
        1.0{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    J_RyR = sum(lowlimit(1.0{dimensionless}), uplimit(8.0{dimensionless}), J_RyR_perm*RyR_open*(Ca_JSR-Ca_SS), i);
    RyR_open = sel
      case (i == P_O3) or (i == P_O4):
        1.0{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    ode(Ca_SS, time) = beta_SS*(J_DHPR+J_RyR+V_myo/V_SS*J_xfer);
    beta_SS = pow(1.0{dimensionless}+B_SR*K_BSR/sqr(K_BSR+Ca_SS)+B_SL*K_BSL/sqr(K_BSL+Ca_SS), -1.0{dimensionless});
  enddef;

  def comp sarcoplasmic_reticulum as
    var Ca_JSR: micromolar {pub: out};
    var V_JSR: micro_litre {init: 2.03E-12};
    var beta_JSR: millimolar;
    var CSQN_tot: millimolar {init: 15.0};
    var K_CSQN: millimolar {init: 0.8};
    var J_tr: flux;
    var tau_tr: millisecond {init: 0.005};
    var Ca_NSR: micromolar {init: 800.0};
    var J_RyR: flux {pub: in};
    var V_SS: micro_litre {pub: in};
    var time: millisecond {pub: in};
    ode(Ca_JSR, time) = beta_JSR*(J_tr-V_SS/V_JSR*J_RyR);
    beta_JSR = pow(1.0{dimensionless}+CSQN_tot*K_CSQN/sqr(K_CSQN+Ca_JSR), -1.0{dimensionless});
    J_tr = 1.0{dimensionless}/tau_tr*(Ca_NSR-Ca_JSR);
  enddef;

  def comp C0 as
    var C0: dimensionless {pub: out};
    var C1: dimensionless {pub: in};
    var C_Ca0: dimensionless {pub: in};
    var alpha: first_order_rate_constant {pub: in};
    var beta: first_order_rate_constant {pub: in};
    var omega: first_order_rate_constant {pub: in};
    var gamma: first_order_rate_constant {pub: in};
    C0 = C1*beta+C_Ca0*omega-(C0*4.0{dimensionless}*alpha+C0*gamma);
  enddef;

  def comp C1 as
    var C1: dimensionless {pub: out};
    var C0: dimensionless {pub: in};
    var C2: dimensionless {pub: in};
    var C_Ca1: micromolar {pub: in};
    var alpha: first_order_rate_constant {pub: in};
    var beta: first_order_rate_constant {pub: in};
    var omega: first_order_rate_constant {pub: in};
    var gamma: first_order_rate_constant {pub: in};
    var a: first_order_rate_constant {pub: in};
    var b: first_order_rate_constant {pub: in};
    C1 = C0*4.0{dimensionless}*alpha+C2*2.0{dimensionless}*beta+C_Ca1*(omega/b)-(C1*beta+C1*3.0{dimensionless}*alpha+C1*gamma*a);
  enddef;

  def comp C2 as
    var C2: dimensionless {pub: out};
    var C1: dimensionless {pub: in};
    var C3: dimensionless {pub: in};
    var C_Ca2: dimensionless {pub: in};
    var alpha: first_order_rate_constant {pub: in};
    var beta: first_order_rate_constant {pub: in};
    var omega: first_order_rate_constant {pub: in};
    var gamma: first_order_rate_constant {pub: in};
    var a: first_order_rate_constant {pub: in};
    var b: first_order_rate_constant {pub: in};
    C2 = C1*3.0{dimensionless}*alpha+C3*3.0{dimensionless}*beta+C_Ca2*(omega/sqr(b))-(C2*2.0{dimensionless}*beta+C2*2.0{dimensionless}*alpha+C2*gamma*sqr(a));
  enddef;

  def comp C3 as
    var C3: dimensionless {pub: out};
    var C2: dimensionless {pub: in};
    var C4: dimensionless {pub: in};
    var C_Ca3: dimensionless {pub: in};
    var alpha: first_order_rate_constant {pub: in};
    var beta: first_order_rate_constant {pub: in};
    var omega: first_order_rate_constant {pub: in};
    var gamma: first_order_rate_constant {pub: in};
    var a: first_order_rate_constant {pub: in};
    var b: first_order_rate_constant {pub: in};
    C3 = C2*2.0{dimensionless}*alpha+C4*4.0{dimensionless}*beta+C_Ca3*(omega/pow(b, 3.0{dimensionless}))-(C3*3.0{dimensionless}*beta+C3*alpha+C3*gamma*pow(a, 3.0{dimensionless}));
  enddef;

  def comp C4 as
    var C4: dimensionless {pub: out};
    var C3: dimensionless {pub: in};
    var O: dimensionless {pub: in};
    var C_Ca4: dimensionless {pub: in};
    var alpha: first_order_rate_constant {pub: in};
    var beta: first_order_rate_constant {pub: in};
    var omega: first_order_rate_constant {pub: in};
    var gamma: first_order_rate_constant {pub: in};
    var a: first_order_rate_constant {pub: in};
    var b: first_order_rate_constant {pub: in};
    var f: first_order_rate_constant {pub: in};
    var g: first_order_rate_constant {pub: in};
    C4 = C3*alpha+O*g+C_Ca4*(omega/pow(b, 4.0{dimensionless}))-(C4*4.0{dimensionless}*beta+C4*f+C4*gamma*pow(a, 4.0{dimensionless}));
  enddef;

  def comp O as
    var O: dimensionless {pub: out};
    var C4: dimensionless {pub: in};
    var f: first_order_rate_constant {pub: in};
    var g: first_order_rate_constant {pub: in};
    O = C4*f-O*g;
  enddef;

  def comp C_Ca0 as
    var C_Ca0: dimensionless {pub: out};
    var C0: dimensionless {pub: in};
    var C_Ca1: dimensionless {pub: in};
    var alpha_: first_order_rate_constant {pub: in};
    var beta_: first_order_rate_constant {pub: in};
    var omega: first_order_rate_constant {pub: in};
    var gamma: first_order_rate_constant {pub: in};
    C_Ca0 = C0*gamma+C_Ca1*beta_-(C_Ca0*4.0{dimensionless}*alpha_+C_Ca0*omega);
  enddef;

  def comp C_Ca1 as
    var C_Ca1: dimensionless {pub: out};
    var C_Ca0: dimensionless {pub: in};
    var C_Ca2: dimensionless {pub: in};
    var C1: dimensionless {pub: in};
    var alpha_: first_order_rate_constant {pub: in};
    var beta_: first_order_rate_constant {pub: in};
    var omega: first_order_rate_constant {pub: in};
    var gamma: first_order_rate_constant {pub: in};
    var a: first_order_rate_constant {pub: in};
    var b: first_order_rate_constant {pub: in};
    C_Ca1 = C_Ca0*4.0{dimensionless}*alpha_+C_Ca2*2.0{dimensionless}*beta_+C1*gamma*a-(C_Ca1*beta_+C_Ca1*3.0{dimensionless}*alpha_+C_Ca1*(omega/b));
  enddef;

  def comp C_Ca2 as
    var C_Ca2: dimensionless {pub: out};
    var C_Ca1: dimensionless {pub: in};
    var C_Ca3: dimensionless {pub: in};
    var C2: dimensionless {pub: in};
    var alpha_: first_order_rate_constant {pub: in};
    var beta_: first_order_rate_constant {pub: in};
    var omega: first_order_rate_constant {pub: in};
    var gamma: first_order_rate_constant {pub: in};
    var a: first_order_rate_constant {pub: in};
    var b: first_order_rate_constant {pub: in};
    C_Ca2 = C_Ca1*3.0{dimensionless}*alpha_+C_Ca3*3.0{dimensionless}*beta_+C2*gamma*sqr(a)-(C_Ca2*2.0{dimensionless}*beta_+C_Ca2*2.0{dimensionless}*alpha_+C_Ca2*(omega/sqr(b)));
  enddef;

  def comp C_Ca3 as
    var C_Ca3: dimensionless {pub: out};
    var C_Ca2: dimensionless {pub: in};
    var C_Ca4: dimensionless {pub: in};
    var C3: dimensionless {pub: in};
    var alpha_: first_order_rate_constant {pub: in};
    var beta_: first_order_rate_constant {pub: in};
    var omega: first_order_rate_constant {pub: in};
    var gamma: first_order_rate_constant {pub: in};
    var a: first_order_rate_constant {pub: in};
    var b: first_order_rate_constant {pub: in};
    C_Ca3 = C_Ca2*2.0{dimensionless}*alpha_+C_Ca4*4.0{dimensionless}*beta_+C3*gamma*pow(a, 3.0{dimensionless})-(C_Ca3*3.0{dimensionless}*beta_+C_Ca3*alpha_+C_Ca3*(omega/pow(b, 3.0{dimensionless})));
  enddef;

  def comp C_Ca4 as
    var C_Ca4: dimensionless {pub: out};
    var C_Ca3: dimensionless {pub: in};
    var O_Ca: dimensionless {pub: in};
    var C4: dimensionless {pub: in};
    var alpha_: first_order_rate_constant {pub: in};
    var beta_: first_order_rate_constant {pub: in};
    var omega: first_order_rate_constant {pub: in};
    var gamma: first_order_rate_constant {pub: in};
    var a: first_order_rate_constant {pub: in};
    var b: first_order_rate_constant {pub: in};
    var f_: first_order_rate_constant {pub: in};
    var g_: first_order_rate_constant {pub: in};
    C_Ca4 = C_Ca3*alpha_+O_Ca*g_+C4*gamma*pow(a, 4.0{dimensionless})-(C_Ca4*4.0{dimensionless}*beta_+C_Ca4*f_+C_Ca4*(omega/pow(b, 4.0{dimensionless})));
  enddef;

  def comp O_Ca as
    var O_Ca: dimensionless {pub: out};
    var C_Ca4: dimensionless {pub: in};
    var f_: first_order_rate_constant {pub: in};
    var g_: first_order_rate_constant {pub: in};
    O_Ca = C_Ca4*f_-O_Ca*g_;
  enddef;

  def comp P_C1 as
    var P_C1: dimensionless {pub: out};
    var k12: first_order_rate_constant {pub: in};
    var k21: first_order_rate_constant {pub: in};
    var P_C2: dimensionless {pub: in};
    P_C1 = P_C2*k21-P_C1*k12;
  enddef;

  def comp P_C2 as
    var P_C2: dimensionless {pub: out};
    var k12: first_order_rate_constant {pub: in};
    var k21: first_order_rate_constant {pub: in};
    var k23: first_order_rate_constant {pub: in};
    var k32: first_order_rate_constant {pub: in};
    var k25: first_order_rate_constant {pub: in};
    var k52: first_order_rate_constant {pub: in};
    var P_C1: dimensionless {pub: in};
    var P_O3: dimensionless {pub: in};
    var P_C5: dimensionless {pub: in};
    P_C2 = P_C1*k12+P_O3*k32+P_C5*k52-(P_C2*k21+P_C2*k23+P_C2*k25);
  enddef;

  def comp P_O3 as
    var P_O3: dimensionless {pub: out};
    var k23: first_order_rate_constant {pub: in};
    var k32: first_order_rate_constant {pub: in};
    var k34: first_order_rate_constant {pub: in};
    var k43: first_order_rate_constant {pub: in};
    var P_C2: dimensionless {pub: in};
    var P_O4: dimensionless {pub: in};
    P_O3 = P_C2*k23+P_O4*k43-(P_O3*k32+P_O3*k34);
  enddef;

  def comp P_O4 as
    var P_O4: dimensionless {pub: out};
    var k45: first_order_rate_constant {pub: in};
    var k54: first_order_rate_constant {pub: in};
    var k34: first_order_rate_constant {pub: in};
    var k43: first_order_rate_constant {pub: in};
    var P_C5: dimensionless {pub: in};
    var P_O3: dimensionless {pub: in};
    P_O4 = P_O3*k34+P_C5*k54-(P_O4*k43+P_O4*k45);
  enddef;

  def comp P_C5 as
    var P_C5: dimensionless {pub: out};
    var k45: first_order_rate_constant {pub: in};
    var k54: first_order_rate_constant {pub: in};
    var k56: first_order_rate_constant {pub: in};
    var k65: first_order_rate_constant {pub: in};
    var k25: first_order_rate_constant {pub: in};
    var k52: first_order_rate_constant {pub: in};
    var P_C2: dimensionless {pub: in};
    var P_O4: dimensionless {pub: in};
    var P_C6: dimensionless {pub: in};
    P_C5 = P_C2*k25+P_O4*k45+P_C6*k65-(P_C5*k52+P_C5*k54+P_C5*k56);
  enddef;

  def comp P_C6 as
    var P_C6: dimensionless {pub: out};
    var k56: first_order_rate_constant {pub: in};
    var k65: first_order_rate_constant {pub: in};
    var P_C5: dimensionless {pub: in};
    P_C6 = P_C6*k65-P_C5*k56;
  enddef;

  def comp DHPR_transition_probabilities as
    var alpha: first_order_rate_constant {pub: out};
    var gamma: first_order_rate_constant {pub: out};
    var beta: first_order_rate_constant {pub: out};
    var alpha_: first_order_rate_constant {pub: out};
    var beta_: first_order_rate_constant {pub: out};
    var omega: first_order_rate_constant {pub: out, init: 10.0};
    var a: first_order_rate_constant {pub: out, init: 2.0};
    var b: first_order_rate_constant {pub: out, init: 2.0};
    var f: first_order_rate_constant {pub: out, init: 300.0};
    var g: first_order_rate_constant {pub: out, init: 2000.0};
    var f_: first_order_rate_constant {pub: out, init: 5.0};
    var g_: first_order_rate_constant {pub: out, init: 7000.0};
    var V: millivolt {pub: in};
    var Ca_SS: micromolar {pub: in};
    gamma = Ca_SS*0.1875{second_order_rate_constant};
    alpha = 0.4{first_order_rate_constant}*exp((V+6.0{millivolt})/25.0{millivolt});
    beta = 0.05{first_order_rate_constant}*exp(-(V+6.0{millivolt})/29.0{millivolt});
    alpha_ = alpha*a;
    beta_ = beta/b;
  enddef;

  def comp RyR_transition_probabilities as
    var k12: first_order_rate_constant {pub: out};
    var k21: first_order_rate_constant {pub: out, init: 2.5E5};
    var k23: first_order_rate_constant {pub: out};
    var k32: first_order_rate_constant {pub: out, init: 9.6E3};
    var k34: first_order_rate_constant {pub: out};
    var k43: first_order_rate_constant {pub: out, init: 1.3E4};
    var k54: first_order_rate_constant {pub: out};
    var k45: first_order_rate_constant {pub: out, init: 66.67};
    var k25: first_order_rate_constant {pub: out};
    var k52: first_order_rate_constant {pub: out, init: 1.235};
    var k56: first_order_rate_constant {pub: out};
    var k65: first_order_rate_constant {pub: out, init: 3.0E6};
    var Ca_SS: micromolar {pub: in};
    k12 = 3.0E6{dimensionless}*pow(Ca_SS, 4.0{dimensionless})/(pow(2.68{micromolar}, 4.0{dimensionless})+pow(Ca_SS, 4.0{dimensionless}));
    k23 = 3.0E7{dimensionless}*pow(Ca_SS, 4.0{dimensionless})/(pow(2.68{micromolar}, 4.0{dimensionless})+pow(Ca_SS, 4.0{dimensionless}));
    k34 = 3.0E6{dimensionless}*pow(Ca_SS, 4.0{dimensionless})/(pow(2.68{micromolar}, 4.0{dimensionless})+pow(Ca_SS, 4.0{dimensionless}));
    k54 = 198.0{dimensionless}*pow(Ca_SS, 4.0{dimensionless})/(pow(2.68{micromolar}, 4.0{dimensionless})+pow(Ca_SS, 4.0{dimensionless}));
    k25 = 3.0E5{dimensionless}*pow(Ca_SS, 4.0{dimensionless})/(pow(2.68{micromolar}, 4.0{dimensionless})+pow(Ca_SS, 4.0{dimensionless}));
    k56 = 3.0E6{dimensionless}*pow(Ca_SS, 4.0{dimensionless})/(pow(2.68{micromolar}, 4.0{dimensionless})+pow(Ca_SS, 4.0{dimensionless}));
  enddef;
  def map between subspace and environment for
    vars time and time;
  enddef;
  def map between sarcoplasmic_reticulum and environment for
    vars time and time;
  enddef;
  def map between subspace and sarcolemma for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ca_o and Ca_o;
  enddef;
  def map between subspace and sarcoplasmic_reticulum for
    vars J_RyR and J_RyR;
    vars V_SS and V_SS;
    vars Ca_JSR and Ca_JSR;
  enddef;
  def map between DHPR_transition_probabilities and sarcolemma for
    vars V and V;
  enddef;
  def map between DHPR_transition_probabilities and subspace for
    vars Ca_SS and Ca_SS;
  enddef;
  def map between DHPR_transition_probabilities and C0 for
    vars alpha and alpha;
    vars beta and beta;
    vars omega and omega;
    vars gamma and gamma;
  enddef;
  def map between DHPR_transition_probabilities and C1 for
    vars alpha and alpha;
    vars beta and beta;
    vars omega and omega;
    vars gamma and gamma;
    vars a and a;
    vars b and b;
  enddef;
  def map between DHPR_transition_probabilities and C2 for
    vars alpha and alpha;
    vars beta and beta;
    vars omega and omega;
    vars gamma and gamma;
    vars a and a;
    vars b and b;
  enddef;
  def map between DHPR_transition_probabilities and C3 for
    vars alpha and alpha;
    vars beta and beta;
    vars omega and omega;
    vars gamma and gamma;
    vars a and a;
    vars b and b;
  enddef;
  def map between DHPR_transition_probabilities and C4 for
    vars alpha and alpha;
    vars beta and beta;
    vars omega and omega;
    vars gamma and gamma;
    vars a and a;
    vars b and b;
    vars f and f;
    vars g and g;
  enddef;
  def map between DHPR_transition_probabilities and O for
    vars f and f;
    vars g and g;
  enddef;
  def map between DHPR_transition_probabilities and C_Ca0 for
    vars alpha_ and alpha_;
    vars beta_ and beta_;
    vars omega and omega;
    vars gamma and gamma;
  enddef;
  def map between DHPR_transition_probabilities and C_Ca1 for
    vars alpha_ and alpha_;
    vars beta_ and beta_;
    vars omega and omega;
    vars gamma and gamma;
    vars a and a;
    vars b and b;
  enddef;
  def map between DHPR_transition_probabilities and C_Ca2 for
    vars alpha_ and alpha_;
    vars beta_ and beta_;
    vars omega and omega;
    vars gamma and gamma;
    vars a and a;
    vars b and b;
  enddef;
  def map between DHPR_transition_probabilities and C_Ca3 for
    vars alpha_ and alpha_;
    vars beta_ and beta_;
    vars omega and omega;
    vars gamma and gamma;
    vars a and a;
    vars b and b;
  enddef;
  def map between DHPR_transition_probabilities and C_Ca4 for
    vars alpha_ and alpha_;
    vars beta_ and beta_;
    vars omega and omega;
    vars gamma and gamma;
    vars a and a;
    vars b and b;
    vars f_ and f_;
    vars g_ and g_;
  enddef;
  def map between DHPR_transition_probabilities and O_Ca for
    vars f_ and f_;
    vars g_ and g_;
  enddef;
  def map between O and subspace for
    vars O and O;
  enddef;
  def map between O_Ca and subspace for
    vars O_Ca and O_Ca;
  enddef;
  def map between P_O3 and subspace for
    vars P_O3 and P_O3;
  enddef;
  def map between P_O4 and subspace for
    vars P_O4 and P_O4;
  enddef;
  def map between C0 and C1 for
    vars C0 and C0;
    vars C1 and C1;
  enddef;
  def map between C0 and C_Ca0 for
    vars C0 and C0;
    vars C_Ca0 and C_Ca0;
  enddef;
  def map between C2 and C1 for
    vars C2 and C2;
    vars C1 and C1;
  enddef;
  def map between C1 and C_Ca1 for
    vars C1 and C1;
    vars C_Ca1 and C_Ca1;
  enddef;
  def map between C2 and C3 for
    vars C2 and C2;
    vars C3 and C3;
  enddef;
  def map between C2 and C_Ca2 for
    vars C2 and C2;
    vars C_Ca2 and C_Ca2;
  enddef;
  def map between C4 and C3 for
    vars C4 and C4;
    vars C3 and C3;
  enddef;
  def map between C3 and C_Ca3 for
    vars C3 and C3;
    vars C_Ca3 and C_Ca3;
  enddef;
  def map between C4 and O for
    vars C4 and C4;
    vars O and O;
  enddef;
  def map between C4 and C_Ca4 for
    vars C4 and C4;
    vars C_Ca4 and C_Ca4;
  enddef;
  def map between C_Ca1 and C_Ca0 for
    vars C_Ca1 and C_Ca1;
    vars C_Ca0 and C_Ca0;
  enddef;
  def map between C_Ca1 and C_Ca2 for
    vars C_Ca1 and C_Ca1;
    vars C_Ca2 and C_Ca2;
  enddef;
  def map between C_Ca3 and C_Ca2 for
    vars C_Ca3 and C_Ca3;
    vars C_Ca2 and C_Ca2;
  enddef;
  def map between C_Ca3 and C_Ca4 for
    vars C_Ca3 and C_Ca3;
    vars C_Ca4 and C_Ca4;
  enddef;
  def map between O_Ca and C_Ca4 for
    vars O_Ca and O_Ca;
    vars C_Ca4 and C_Ca4;
  enddef;
  def map between RyR_transition_probabilities and subspace for
    vars Ca_SS and Ca_SS;
  enddef;
  def map between RyR_transition_probabilities and P_C1 for
    vars k12 and k12;
    vars k21 and k21;
  enddef;
  def map between RyR_transition_probabilities and P_C2 for
    vars k12 and k12;
    vars k21 and k21;
    vars k23 and k23;
    vars k32 and k32;
    vars k25 and k25;
    vars k52 and k52;
  enddef;
  def map between RyR_transition_probabilities and P_O3 for
    vars k23 and k23;
    vars k32 and k32;
    vars k34 and k34;
    vars k43 and k43;
  enddef;
  def map between RyR_transition_probabilities and P_O4 for
    vars k45 and k45;
    vars k54 and k54;
    vars k34 and k34;
    vars k43 and k43;
  enddef;
  def map between RyR_transition_probabilities and P_C5 for
    vars k45 and k45;
    vars k54 and k54;
    vars k56 and k56;
    vars k65 and k65;
    vars k25 and k25;
    vars k52 and k52;
  enddef;
  def map between RyR_transition_probabilities and P_C6 for
    vars k56 and k56;
    vars k65 and k65;
  enddef;
  def map between P_C1 and P_C2 for
    vars P_C1 and P_C1;
    vars P_C2 and P_C2;
  enddef;
  def map between P_C5 and P_C2 for
    vars P_C5 and P_C5;
    vars P_C2 and P_C2;
  enddef;
  def map between P_O3 and P_C2 for
    vars P_O3 and P_O3;
    vars P_C2 and P_C2;
  enddef;
  def map between P_O3 and P_O4 for
    vars P_O3 and P_O3;
    vars P_O4 and P_O4;
  enddef;
  def map between P_O4 and P_C5 for
    vars P_O4 and P_O4;
    vars P_C5 and P_C5;
  enddef;
  def map between P_C5 and P_C6 for
    vars P_C5 and P_C5;
    vars P_C6 and P_C6;
  enddef;
enddef;
