<?xml version='1.0' encoding='utf-8'?>

<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="defibrillation_beeler_reuter_model_1999" name="skouibine_trayanova_moore_1999_version02">
  
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>The Defibrillation Beeler-Reuter Model</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>

    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: The goal of this simulation study is to examine, in a sheet of myocardium, the contribution of anode and cathode break phenomena in terminating a spiral wave reentry by the defibrillation shock. The tissue is represented as a homogeneous bidomain with unequal anisotropy ratios. Two case studies are presented in this article: tissue that can electroporate at high levels of transmembrane potential, and model tissue that does not support electroporation. In both cases, the spiral wave is initiated via cross-field stimulation of the bidomain sheet. The extracellular defibrillation shock is delivered via two small electrodes located at opposite tissue boundaries. Modifications in the active membrane kinetics enable the delivery of high-strength defibrillation shocks. Numerical solutions are obtained using an efficient semi-implicit predictor-corrector scheme that allows one to execute the simulations within reasonable time. The simulation results demonstrate that anode and/or cathode break excitations contribute significantly to the activity during and after the shock. For a successful defibrillation shock, the virtual electrodes and the break excitations restrict the spiral wave and render the tissue refractory so it cannot further maintain the reentry. The results also indicate that electroporation alters the anode/cathode break phenomena, the major impact being on the timing of the cathode-break excitations. Thus, electroporation results in different patterns of transmembrane potential distribution after the shock. This difference in patterns may or may not result in change of the outcome of the shock.
</para>

<para>
The original paper reference is cited below:
</para>

<para>Anode/cathode make and break phenomena during defibrillation: Does electroporation make a difference?, Skouibine, K., Trayanova, N., Moore, P. 1999, <emphasis>IEEE Transactions on Biomedical Engineering</emphasis>, 46, 769-777.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=10396895&amp;dopt=Abstract">PubMed ID: 10396895</ulink>
</para>

<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>model diagram</title>
							</objectinfo>
							<imagedata fileref="skouibine_1999.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of the cell model.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>

  
  <!--
    Below, we define some additional units for association with variables and
    constants within the model. The identifiers are fairly self-explanatory.
  -->
  <units name="ms">
    <unit units="second" prefix="milli"/>
  </units>
  
  <units name="per_ms">
    <unit units="second" prefix="milli" exponent="-1"/>
  </units>

  <units name="mV">
    <unit units="volt" prefix="milli"/>
  </units>

  <units name="per_mV">
    <unit units="volt" prefix="milli" exponent="-1"/>
  </units>
  
  <units name="per_mV_ms">
    <unit units="mV" exponent="-1"/>
    <unit units="ms" exponent="-1"/>
  </units>
  
  <units name="mS_per_mm2">
    <unit units="siemens" prefix="milli"/>
    <unit units="metre" prefix="milli" exponent="-2"/>
  </units>

  <units name="uF_per_mm2">
    <unit units="farad" prefix="micro"/>
    <unit units="metre" prefix="milli" exponent="-2"/>
  </units>

  <units name="uA_per_mm2">
    <unit units="ampere" prefix="micro"/>
    <unit units="metre" prefix="milli" exponent="-2"/>
  </units>
  
  <units name="concentration_units">
    <unit units="mole" prefix="nano"/>
    <unit units="metre" prefix="milli" exponent="-3"/>
  </units>
  
  <units name="per_concentration_units">
    <unit units="concentration_units" exponent="-1"/>
  </units>
   
  <units name="flux">
    <unit units="concentration_units"/>
    <unit units="ms" exponent="-1"/>
  </units>
  
  <!--
    The "environment" component is used to declare variables that are used by
    all or most of the other components, in this case just "time".
  -->
  <component cmeta:id="environment" name="environment">
    <variable units="ms" public_interface="out" name="time"/>
  </component>
  
  <component cmeta:id="membrane" name="membrane">
    

    <variable units="mV" public_interface="out" name="V" initial_value="-86.9"/>
    <variable units="uA_per_mm2" name="I_stim"/>
    <variable units="uF_per_mm2" name="C" initial_value="1.0e-2"/>
    <variable units="ms" public_interface="in" name="time"/>
    <variable units="uA_per_mm2" public_interface="in" name="i_Na"/>
    <variable units="uA_per_mm2" public_interface="in" name="i_s"/>
    <variable units="uA_per_mm2" public_interface="in" name="i_x1"/>
    <variable units="uA_per_mm2" public_interface="in" name="i_K1"/>
    
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="membrane_voltage_diff_eq">
      <apply id="membrane_voltage_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> V </ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci> I_stim </ci>
            <apply>
              <plus/>
              <ci> i_Na </ci>
              <ci> i_s </ci>
              <ci> i_x1 </ci>
              <ci> i_K1 </ci>
            </apply>
          </apply>
          <ci> C </ci>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="fast_sodium_current" name="fast_sodium_current">
    

    <variable units="uA_per_mm2" public_interface="out" name="i_Na"/>
    <variable units="mS_per_mm2" name="g_Na" initial_value="0.15"/>
    <variable units="mV" name="E_Na" initial_value="40.0"/>
    <variable units="ms" public_interface="in" private_interface="out" name="time"/>
    <variable units="mV" public_interface="in" private_interface="out" name="V"/>
    <variable units="dimensionless" private_interface="in" name="m"/>
    <variable units="dimensionless" private_interface="in" name="h"/>
    
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="i_Na_calculation_eq">
      <apply id="i_Na_calculation">
        <eq/>
        <ci> i_Na </ci>
        <apply>
          <times/>
          <ci> g_Na </ci>
            <apply>
            <power/>
              <ci> m </ci>
              <cn cellml:units="dimensionless"> 3.0 </cn>
            </apply>
            <ci> h </ci>
            <apply>
            <minus/>
            <ci> V </ci>
            <ci> E_Na </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="fast_sodium_current_m_gate" name="fast_sodium_current_m_gate">
    

    <variable units="dimensionless" public_interface="out" name="m" initial_value="0.0"/>
    <variable units="per_ms" name="alpha_m"/>
    <variable units="per_ms" name="beta_m"/>
    <variable units="mV" public_interface="in" name="V"/>
    <variable units="ms" public_interface="in" name="time"/>
    
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="alpha_m_calculation_eq">
      <apply id="alpha_m_calculation">
        <eq/>
        <ci> alpha_m </ci>
        <piecewise>
          <piece>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> 890.9437890 </cn>
              <apply>
                <divide/>
                <apply>
                  <exp/>
                  <apply>
                    <minus/>
                    <apply>
                      <times/>
                      <cn cellml:units="mV"> 0.0486479 </cn>
                      <ci> V </ci>
                    </apply>
                    <cn cellml:units="mV"> 4.8647916 </cn>
                  </apply>
                </apply>
                <apply>
                  <plus/>
                  <cn cellml:units="dimensionless"> 1.0 </cn>
                  <apply>
                    <times/>
                    <cn cellml:units="dimensionless"> 5.93962526 </cn>
                    <apply>
                      <exp/>
                      <apply>
                        <minus/>
                        <apply>
                          <times/>
                          <cn cellml:units="mV"> 0.0486479 </cn>
                          <ci> V </ci>
                        </apply>
                        <cn cellml:units="mV"> 4.8647916 </cn>
                      </apply>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <gt/>
              <ci> V </ci>
              <cn cellml:units="mV"> 100.0 </cn>
            </apply>
          </piece>
          <otherwise>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> 0.9 </cn>
              <apply>
                <divide/>
                <apply>
                  <plus/>
                  <ci> V </ci>
                  <cn cellml:units="mV"> 42.65 </cn>
                </apply>
                <apply>
                  <minus/>
                  <cn cellml:units="dimensionless"> 1.0 </cn>
                  <apply>
                    <exp/>
                    <apply>
                      <minus/>
                      <apply>
                        <times/>
                        <cn cellml:units="dimensionless"> -0.22 </cn>
                        <ci> V </ci>
                      </apply>
                      <cn cellml:units="mV"> 9.3830 </cn>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
          </otherwise>
        </piecewise>
      </apply>
    </math>
      
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="beta_m_calculation_eq">
      <apply id="beta_m_calculation">
        <eq/>
        <ci> beta_m </ci>
        <piecewise>
          <piece>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> 1.437 </cn>
              <apply>
                <exp/>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <cn cellml:units="dimensionless"> -0.085 </cn>
                    <ci> V </ci>
                  </apply>
                  <cn cellml:units="mV"> 3.37875 </cn>
                </apply>
              </apply>
            </apply> 
            <apply>
              <gt/>
              <ci> V </ci>
              <cn cellml:units="mV"> -85.0 </cn> 
            </apply>
          </piece>
          <otherwise>
            <apply>
              <divide/>
              <cn cellml:units="dimensionless"> 100.0 </cn>
              <apply>
                <plus/>
                <cn cellml:units="dimensionless"> 1.0 </cn>
                <apply>
                  <times/>
                  <cn cellml:units="dimensionless"> 0.486479 </cn>
                  <apply>
                    <exp/>
                    <apply>
                      <plus/>
                      <apply>
                        <times/>
                        <cn cellml:units="dimensionless"> 0.2597504 </cn>
                        <ci> V </ci>
                      </apply>
                      <cn cellml:units="mV"> 22.0787804 </cn> 
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
          </otherwise>
        </piecewise>
      </apply>
    </math>
      
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="dm_dt_eq">
      <apply id="dm_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> m </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> alpha_m </ci>
            <apply>
              <minus/>
              <cn cellml:units="per_mV"> 1.0 </cn>
              <ci> m </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> beta_m </ci>
            <ci> m </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="fast_sodium_current_h_gate" name="fast_sodium_current_h_gate">
    

    <variable units="dimensionless" public_interface="out" name="h" initial_value="0.99"/>
    <variable units="per_ms" name="alpha_h"/>
    <variable units="per_ms" name="beta_h"/>
    <variable units="mV" public_interface="in" name="V"/>
    <variable units="ms" public_interface="in" name="time"/>
    
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="alpha_h_calculation_eq">
      <apply id="alpha_h_calculation">
        <eq/>
        <ci> alpha_h </ci>
        <piecewise>
          <piece>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> 0.1 </cn>
              <apply>
                <exp/>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <cn cellml:units="dimensionless"> -0.193 </cn>
                    <ci> V </ci>
                  </apply>
                  <cn cellml:units="mV"> 15.37245 </cn>
                </apply>
              </apply>
            </apply> 
            <apply>
              <gt/>
              <ci> V </ci>
              <cn cellml:units="mV"> -90.0 </cn> 
            </apply>
          </piece>
          <otherwise>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless"> -12.0662845 </cn>
              <apply>
                <times/>
                <cn cellml:units="per_mV"> 0.1422598 </cn>
                <ci> V </ci>
              </apply>
            </apply>
          </otherwise>
        </piecewise>
      </apply>
    </math>
                
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="beta_h_calculation_eq">
      <apply id="beta_h_calculation">
        <eq/>
        <ci> beta_h </ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless"> 1.7 </cn>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <exp/>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <cn cellml:units="dimensionless"> -0.095 </cn>
                  <ci> V </ci>
                </apply>
                <cn cellml:units="mV"> 1.9475 </cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
                
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="dh_dt_eq">
      <apply id="dh_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> h </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> alpha_h </ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <ci> h </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> beta_h </ci>
            <ci> h </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
         
  <component cmeta:id="time_independent_outward_current" name="time_independent_outward_current">
    
    <variable units="uA_per_mm2" public_interface="out" name="i_K1"/>
    <variable units="ms" public_interface="in" name="time"/>
    <variable units="mV" public_interface="in" name="V"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="i_K1_calculation">
        <eq/>
        <ci> i_K1 </ci>
        <apply>
          <times/>
          <cn cellml:units="dimensionless"> 0.35e-2 </cn>
          <apply>
            <plus/>
            <apply>
              <times/>
              <cn cellml:units="per_ms"> 4.0 </cn>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <apply>
                    <exp/>
                    <apply>
                      <times/>
                      <cn cellml:units="per_mV"> 0.04 </cn>
                      <apply>
                        <plus/>
                        <ci> V </ci>
                        <cn cellml:units="mV"> 85.0 </cn>
                      </apply>
                    </apply>                   
                  </apply>
                  <cn cellml:units="dimensionless"> 1.0 </cn>
                </apply>
                <apply>
                  <plus/>
                  <apply>
                    <exp/>
                    <apply>
                      <times/>
                      <cn cellml:units="per_mV"> 0.08 </cn>
                      <apply>
                        <plus/>
                        <ci> V </ci>
                        <cn cellml:units="mV"> 53 </cn>
                      </apply>
                    </apply>
                  </apply>
                  <apply>
                    <exp/>
                    <apply>
                      <times/> 
                      <cn cellml:units="per_mV"> 0.04 </cn>
                      <apply>
                        <plus/>
                        <ci> V </ci>
                        <cn cellml:units="mV"> 53.0 </cn>
                      </apply>
                    </apply>          
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <times/>
              <cn cellml:units="per_ms"> 0.2 </cn>
              <apply>
                <divide/>
                <apply>
                  <plus/>
                  <ci> V </ci>
                  <cn cellml:units="mV"> 23.0 </cn>
                </apply>
                <apply>
                  <minus/>
                  <cn cellml:units="dimensionless"> 1.0 </cn>
                  <apply>
                    <exp/>
                    <apply>
                      <times/>
                      <cn cellml:units="per_mV"> -0.04 </cn>
                      <apply>
                        <plus/>
                        <ci> V </ci>
                        <cn cellml:units="mV"> 23.0 </cn>
                      </apply>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="time_dependent_outward_current" name="time_dependent_outward_current">
    
    <variable units="uA_per_mm2" public_interface="out" name="i_x1"/>
    <variable units="ms" public_interface="in" private_interface="out" name="time"/>
    <variable units="mV" public_interface="in" private_interface="out" name="V"/>
    <variable units="dimensionless" private_interface="in" name="x1"/>
        
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="i_x1_calculation">
        <eq/>
        <ci> i_x1 </ci>
        <apply>
          <times/>
          <ci> x1 </ci>
          <cn cellml:units="dimensionless"> 0.8e-2 </cn>
          <apply>
            <divide/>
            <apply>
              <minus/>
              <apply>
                <exp/>
                <apply>
                  <times/>
                  <cn cellml:units="per_mV"> 0.04 </cn>
                  <apply>
                    <plus/>
                    <ci> V </ci>
                    <cn cellml:units="mV"> 77.0 </cn>
                  </apply>
                </apply>
              </apply>
              <cn cellml:units="dimensionless"> 1.0 </cn>
            </apply>
            <apply>
              <exp/>
              <apply>
                <times/>
                <cn cellml:units="per_mV"> 0.04 </cn>
                <apply>
                  <plus/> 
                  <ci> V </ci>
                  <cn cellml:units="mV"> 35.0 </cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
      
  <component cmeta:id="time_dependent_outward_current_x1_gate" name="time_dependent_outward_current_x1_gate">
    

    <variable units="dimensionless" public_interface="out" name="x1" initial_value="0.0"/>
    <variable units="per_ms" name="alpha_x1"/>
    <variable units="per_ms" name="beta_x1"/>
    <variable units="mV" public_interface="in" name="V"/>
    <variable units="ms" public_interface="in" name="time"/>
    
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="alpha_x1_calculation_eq">
      <apply id="alpha_x1_calculation">
        <eq/>
        <ci> alpha_x1 </ci>
        <piecewise>
          <piece>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> 151.7994692 </cn>
              <apply>
                <divide/>
                <apply>
                  <exp/>
                  <apply>
                    <minus/>
                    <apply>
                      <times/>
                      <cn cellml:units="mV"> 0.0654679 </cn>
                      <ci> V </ci>
                    </apply>
                    <cn cellml:units="mV"> 26.1871448 </cn>
                  </apply>
                </apply>
                <apply>
                  <plus/>
                  <cn cellml:units="dimensionless"> 1.0 </cn>
                  <apply>
                    <times/>
                    <cn cellml:units="dimensionless"> 1.5179947 </cn>
                    <apply>
                      <exp/>
                      <apply>
                        <minus/>
                        <apply>
                          <times/>
                          <cn cellml:units="mV"> 0.0654679 </cn>
                          <ci> V </ci>
                        </apply>
                        <cn cellml:units="mV"> 26.1871448 </cn>
                      </apply>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <gt/>
              <ci> V </ci>
              <cn cellml:units="mV"> 400.0 </cn>
            </apply>
          </piece>
          <otherwise>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> 0.0005 </cn>
              <apply>
                <divide/>
                <apply>
                  <exp/>
                  <apply>
                    <plus/>
                    <apply>
                      <times/>
                      <ci> V </ci>
                      <cn cellml:units="dimensionless"> 0.083 </cn>
                    </apply>
                    <cn cellml:units="mV"> 4.150 </cn>
                  </apply>
                </apply>
                <apply>
                  <plus/>
                  <cn cellml:units="dimensionless"> 1.0 </cn>
                  <apply>
                    <exp/>
                    <apply>
                      <plus/>
                      <apply>
                        <times/>
                        <cn cellml:units="dimensionless"> 0.057 </cn>
                        <ci> V </ci>
                      </apply>
                      <cn cellml:units="mV"> 2.850 </cn>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
          </otherwise>
        </piecewise>
      </apply>
    </math>
      
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="beta_x1_calculation_eq">
      <apply id="beta_x1_calculation">
        <eq/>
        <ci> beta_x1 </ci>
        <apply>
          <times/>
          <cn cellml:units="dimensionless"> 0.0013 </cn>
          <apply>
            <divide/>
            <apply>
              <exp/>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <ci> V </ci>
                  <cn cellml:units="dimensionless"> -0.06 </cn>
                </apply>
                <cn cellml:units="mV"> 1.2 </cn>
              </apply>
            </apply>
            <apply>
              <plus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <apply>
                <exp/>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <cn cellml:units="dimensionless"> -0.04 </cn>
                    <ci> V </ci>
                  </apply>
                  <cn cellml:units="mV"> 0.8 </cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
      
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="dx1_dt_eq">
      <apply id="dx1_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> x1 </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> alpha_x1 </ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <ci> x1 </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> beta_x1 </ci>
            <ci> x1 </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="slow_inward_current" name="slow_inward_current">
    
    <variable units="uA_per_mm2" public_interface="out" name="i_s"/>
    <variable units="mS_per_mm2" name="g_s" initial_value="9.0e-4"/>
    <variable units="mV" name="E_s"/>
    <variable units="concentration_units" name="Cai" initial_value="1.0e-4"/>
    <variable units="ms" public_interface="in" private_interface="out" name="time"/>
    <variable units="mV" public_interface="in" private_interface="out" name="V"/>
    
    <variable units="dimensionless" private_interface="in" name="d"/>
    <variable units="dimensionless" private_interface="in" name="f"/>
    
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="E_s_calculation_eq">
      <apply id="E_s_calculation">
        <eq/>
        <ci> E_s </ci>
        <apply>
          <minus/>
          <cn cellml:units="mV"> -82.3 </cn>
          <apply>
            <times/>
            <cn cellml:units="mV"> 13.0287 </cn>
            <apply>
              <ln/>
              <apply>
                <times/>
                <ci> Cai </ci>
                <cn cellml:units="per_concentration_units">0.001</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
      
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="i_s_calculation_eq">
      <apply id="i_s_calculation">
        <eq/>
        <ci> i_s </ci>
        <apply>
          <times/>
          <ci> g_s </ci>
          <ci> d </ci>
          <ci> f </ci>
          <apply>
            <minus/>
            <ci> V </ci>
            <ci> E_s </ci>
          </apply>
        </apply>
      </apply>
    </math>
      
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="dCai_dt_eq">
      <apply id="dCai_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> Cai </ci>
        </apply>
        <piecewise>
          <piece>
            <cn cellml:units="flux"> 0.0 </cn>
            <apply>
              <gt/>
              <ci> V </ci>
              <cn cellml:units="mV"> 200.0 </cn>
            </apply>
          </piece>
          <otherwise>
            <apply>
              <plus/>
              <apply>
                <times/>
                <ci> i_s </ci>
                <cn cellml:units="dimensionless"> -0.01 </cn>
              </apply>
              <apply>
                <times/>
                <cn cellml:units="per_ms"> 0.07 </cn>
                <apply>
                  <minus/>
                  <cn cellml:units="concentration_units"> 0.0001 </cn>
                  <ci> Cai </ci>
                </apply>
              </apply>
            </apply>
          </otherwise>
        </piecewise>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="slow_inward_current_d_gate" name="slow_inward_current_d_gate">
    

    <variable units="dimensionless" public_interface="out" name="d" initial_value="0.0"/>
    <variable units="per_ms" name="alpha_d"/>
    <variable units="per_ms" name="beta_d"/>
    <variable units="dimensionless" name="R_d" initial_value="1.0"/>
    <variable units="mV" public_interface="in" name="V"/>
    <variable units="ms" public_interface="in" name="time"/>

    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="alpha_d_calculation_eq">
      <apply id="alpha_d_calculation">
        <eq/>
        <ci> alpha_d </ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="per_ms"> 0.095 </cn>
            <apply>
              <exp/>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <apply>
                    <minus/>
                    <ci> V </ci>
                    <cn cellml:units="mV"> 5.0 </cn>
                  </apply>
                  <cn cellml:units="mV"> 100.0 </cn>
                </apply>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <exp/>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <apply>
                    <minus/>
                    <ci> V </ci>
                    <cn cellml:units="mV"> 5.0 </cn>
                  </apply>
                  <cn cellml:units="mV"> 13.89 </cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
      
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="beta_d_calculation_eq">
      <apply id="beta_d_calculation">
        <eq/>
        <ci> beta_d </ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="per_ms"> 0.07 </cn>
            <apply>
              <exp/>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <apply>
                    <plus/>
                    <ci> V </ci>
                    <cn cellml:units="mV"> 44.0 </cn>
                  </apply>
                  <cn cellml:units="mV"> 59.0 </cn>
                </apply>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <plus/>
                  <ci> V </ci>
                  <cn cellml:units="mV"> 44.0 </cn>
                </apply>
                <cn cellml:units="mV"> 20.0 </cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
      
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="dd_dt_eq">
      <apply id="dd_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> d </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <apply>
              <divide/>
              <ci> alpha_d </ci>
              <ci> R_d </ci>
            </apply>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <ci> d </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> beta_d </ci>
            <ci> d </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="slow_inward_current_f_gate" name="slow_inward_current_f_gate">
    

    <variable units="dimensionless" public_interface="out" name="f" initial_value="1.0"/> 
    <variable units="per_ms" name="alpha_f"/>
    <variable units="per_ms" name="beta_f"/>
    <variable units="dimensionless" name="R_f" initial_value="1.0"/>
    <variable units="mV" public_interface="in" name="V"/>
    <variable units="ms" public_interface="in" name="time"/>
     
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="alpha_f_calculation_eq">
      <apply id="alpha_f_calculation">
        <eq/>
        <ci> alpha_f </ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="per_ms"> 0.012 </cn>
            <apply>
              <exp/>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <apply>
                    <plus/>
                    <ci> V </ci>
                    <cn cellml:units="mV"> 28.0 </cn>
                  </apply>
                  <cn cellml:units="mV"> 125.0 </cn>
                </apply>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <plus/>
                  <ci> V </ci>
                  <cn cellml:units="mV"> 28.0 </cn>
                </apply>
                <cn cellml:units="mV"> 6.67 </cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
         
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="beta_f_calculation_eq">
      <apply id="beta_f_calculation">
        <eq/>
        <ci> beta_f </ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="per_ms"> 0.0065 </cn>
            <apply>
              <exp/>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <apply>
                    <plus/>
                    <ci> V </ci>
                    <cn cellml:units="mV"> 30.0 </cn>
                  </apply>
                  <cn cellml:units="mV"> 50.0 </cn>
                </apply>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <exp/>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <apply>
                    <plus/>
                    <ci> V </ci>
                    <cn cellml:units="mV"> 30.0 </cn>
                  </apply>
                  <cn cellml:units="mV"> 5.0 </cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
         
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="df_dt_eq">
      <apply id="df_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> f </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <apply>
              <divide/>
              <ci> alpha_f </ci>
              <ci> R_f </ci>
            </apply>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <ci> f </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> beta_f </ci>
            <ci> f </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <group>
    <relationship_ref relationship="containment"/>
    <component_ref component="membrane">
      <component_ref component="fast_sodium_current">
        <component_ref component="fast_sodium_current_m_gate"/>
        <component_ref component="fast_sodium_current_h_gate"/>
      </component_ref>
      <component_ref component="slow_inward_current">
        <component_ref component="slow_inward_current_d_gate"/>
        <component_ref component="slow_inward_current_f_gate"/>
      </component_ref>
      <component_ref component="time_dependent_outward_current">
        <component_ref component="time_dependent_outward_current_x1_gate"/>
      </component_ref>
      <component_ref component="time_independent_outward_current"/>
    </component_ref>
  </group>
  
  <group>
    <relationship_ref relationship="encapsulation"/>
    <component_ref component="fast_sodium_current">
      <component_ref component="fast_sodium_current_m_gate"/>
      <component_ref component="fast_sodium_current_h_gate"/>
    </component_ref>
    <component_ref component="slow_inward_current">
      <component_ref component="slow_inward_current_d_gate"/>
      <component_ref component="slow_inward_current_f_gate"/>
    </component_ref>
    <component_ref component="time_dependent_outward_current">
      <component_ref component="time_dependent_outward_current_x1_gate"/>
    </component_ref>
  </group>
  
  <connection>
    <map_components component_2="environment" component_1="membrane"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="fast_sodium_current"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="slow_inward_current"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="time_dependent_outward_current"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
   
  <connection>
    <map_components component_2="environment" component_1="time_independent_outward_current"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
        
  <connection>
    <map_components component_2="fast_sodium_current" component_1="membrane"/>
    <map_variables variable_2="V" variable_1="V"/>
     <map_variables variable_2="i_Na" variable_1="i_Na"/>
  </connection>

  <connection>
    <map_components component_2="slow_inward_current" component_1="membrane"/>
    <map_variables variable_2="V" variable_1="V"/>
    <map_variables variable_2="i_s" variable_1="i_s"/>
  </connection>

  <connection>
    <map_components component_2="time_dependent_outward_current" component_1="membrane"/>
    <map_variables variable_2="V" variable_1="V"/>
    <map_variables variable_2="i_x1" variable_1="i_x1"/>
  </connection>
  
  <connection>
    <map_components component_2="time_independent_outward_current" component_1="membrane"/>
    <map_variables variable_2="V" variable_1="V"/>
    <map_variables variable_2="i_K1" variable_1="i_K1"/>
  </connection>
    
  <connection>
    <map_components component_2="fast_sodium_current_m_gate" component_1="fast_sodium_current"/>
    <map_variables variable_2="m" variable_1="m"/>
    <map_variables variable_2="time" variable_1="time"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>

  <connection>
    <map_components component_2="fast_sodium_current_h_gate" component_1="fast_sodium_current"/>
    <map_variables variable_2="h" variable_1="h"/>
    <map_variables variable_2="time" variable_1="time"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
 
  <connection>
    <map_components component_2="time_dependent_outward_current_x1_gate" component_1="time_dependent_outward_current"/>
    <map_variables variable_2="x1" variable_1="x1"/>
    <map_variables variable_2="time" variable_1="time"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
  
  <connection>
    <map_components component_2="slow_inward_current_d_gate" component_1="slow_inward_current"/>
    <map_variables variable_2="d" variable_1="d"/>
    <map_variables variable_2="time" variable_1="time"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
  
  <connection>
    <map_components component_2="slow_inward_current_f_gate" component_1="slow_inward_current"/>
    <map_variables variable_2="f" variable_1="f"/>
    <map_variables variable_2="time" variable_1="time"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>








<rdf:RDF>
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  <rdf:Description rdf:about="rdf:#f457548d-6226-432e-8250-f1dc23f6038b">
    <bqs:Pubmed_id>10396895</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#de6e1a4d-2881-4730-bece-21fe7f04ce05"/>
  </rdf:Description>
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  <rdf:Description rdf:about="rdf:#7dec2b0f-1986-4fc5-abf7-5b5dac773925">
    <dc:creator rdf:resource="rdf:#6ec9f13c-ec2f-46bf-83ca-6b275c7e9e10"/>
    <rdf:value>This is the CellML description of the defibrillation Beeler-Reuter model. The original Beeler-Reuter model was modified by Drouhard and Roberge (1987) to improve the fast sodium kinetics. This model was then further modified by Skouibine et al (1999) to handle potentials outside the range of normal physiological activity, allowing the model to be used in defibrillation studies.</rdf:value>
  </rdf:Description>
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</rdf:RDF>
</model>
