<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 11/05/2010 at 2:36:52 at p.m. using:

COR (0.9.31.1371)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="vangoor_2000" cmeta:id="vangoor_2000" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Amplitude-Dependent Spike-Broadening In GnRH-Secreting Neurons</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>This model runs in OpenCell and COR and the units are consistent throughout. Although it is a accurate reproduction of the published model it does not recreate the published results. Although the steady state values for some parameters are similar to published results, the model does not recreate the bursting seen in the paper and a stimulus protocl might need to be added. </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: In GnRH-secreting (GT1) neurons, activation of Ca(2+)-mobilizing receptors induces a sustained membrane depolarization that shifts the profile of the action potential (AP) waveform from sharp, high-amplitude to broad, low-amplitude spikes. Here we characterize this shift in the firing pattern and its impact on Ca(2+) influx experimentally by using prerecorded sharp and broad APs as the voltage-clamp command pulse. As a quantitative test of the experimental data, a mathematical model based on the membrane and ionic current properties of GT1 neurons was also used. Both experimental and modeling results indicated that inactivation of the tetrodotoxin-sensitive Na(+) channels by sustained depolarization accounted for a reduction in the amplitude of the spike upstroke. The ensuing decrease in tetraethylammonium-sensitive K(+) current activation slowed membrane repolarization, leading to AP broadening. This change in firing pattern increased the total L-type Ca(2+) current and facilitated AP-driven Ca(2+) entry. The leftward shift in the current-voltage relation of the L-type Ca(2+) channels expressed in GT1 cells allowed the depolarization-induced AP broadening to facilitate Ca(2+) entry despite a decrease in spike amplitude. Thus the gating properties of the L-type Ca(2+) channels expressed in GT1 neurons are suitable for promoting AP-driven Ca(2+) influx in receptor- and non-receptor-depolarized cells.
</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
Amplitude-Dependent Spike-Broadening and Enhanced Ca<superscript>2+</superscript> Signaling in GnRH-Secreting Neurons, Fredrick Van Goor, Andrew P. LeBeau, Lazar Z. Krsmanovic, Arthur Sherman, Kevin J. Catt and Stanko S. Stojikovic, 2000, <emphasis>Biophysical Journal</emphasis>, 79, 1310-1323.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=10968994&amp;dopt=Abstract">PubMed ID: 10968994</ulink>
				</para>
				<informalfigure float="0" id="fig_cell_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>diagram of the cell model</title>
							</objectinfo>
							<imagedata fileref="vangoor_2000-celldiagram.png"/>
						</imageobject>
					</mediaobject>
				</informalfigure>
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>diagram of the cell model</title>
							</objectinfo>
							<imagedata fileref="vangoor_2000.png"/>
						</imageobject>
					</mediaobject>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	
	<rdf:RDF>
		<rdf:Description rdf:about="#sodium_current">
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:parseType="Resource">
				<rdf:value>
          In their original model, Van Goor et al. used a Hodgkin-Huxley type 
          equation to represent the sodium current (see CellML description 
          below).  However, in this description, INa exhibited a large surge of 
          activation during the spike repolarisation, and also did not spike 
          during broadening, suggesting that the model gating kinetics don't 
          accurately represent those in GTI neurons.  
          
          Consequently, they replaced the Hodgkin-Huxley-like description with 
          Kuo and Bean's 1994 model of INa.  In this description the Na+ channel 
          is composed of subunits with four possible states: deactivated (D), 
          activated (A), deactivated-inhibited (D*), and activated-inhibited 
          (A*).  The open, conducting state (O) is given by A3 in the reaction 
          scheme.
      
          Following is the original reaction scheme. 
        </rdf:value>
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			</cmeta:comment>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		<rdf:Description rdf:about="rdf:#5715ea1c-5358-451a-b354-b5db205b0dac">
			<dc:creator rdf:resource="rdf:#2cc1626e-daa8-4108-82dc-cd5c2cdc61db"/>
			<rdf:value>This is the CellML description of Van Goor et al's 2000 mathematical 
          model of amplitude-dependent spike broadening and enhanced Ca2+ 
          signaling in GnRH-secreting neurons.</rdf:value>
		</rdf:Description>
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		<rdf:Description rdf:about="#vangoor_2000">
			<dc:title>
        Van Goor et al's 2000 mathematical model of amplitude-dependent spike 
        broadening and enhanced Ca2+ signaling in GnRH-secreting neurons.
     </dc:title>
			<cmeta:bio_entity xmlns:cmeta="http://www.cellml.org/metadata/1.0#">Neuron</cmeta:bio_entity>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#5715ea1c-5358-451a-b354-b5db205b0dac"/>
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		</rdf:Description>
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		<rdf:Description rdf:about="rdf:#02a6595c-68d3-48be-9a05-bf314d873165">
			<bqs:Pubmed_id>10968994</bqs:Pubmed_id>
			<bqs:JournalArticle rdf:resource="rdf:#22f12471-eb99-4da3-9c64-29f0c402df63"/>
		</rdf:Description>
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	</rdf:RDF>   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millisecond">
      <unit units="second" prefix="milli"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="first_order_rate_constant">
      <unit units="millisecond" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millivolt">
      <unit units="volt" prefix="milli"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="picoF">
      <unit units="farad" prefix="pico"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="picoA">
      <unit units="ampere" prefix="pico"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="nanoS">
      <unit units="siemens" prefix="nano"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millimolar">
      <unit units="mole" prefix="milli"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="second_order_rate_constant">
      <unit units="millimolar"/>
      <unit units="millisecond" exponent="-1"/>
   </units>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="environment">
      <variable name="time" units="millisecond" public_interface="out"/>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="membrane">
      <variable name="V" units="millivolt" initial_value="-60" public_interface="out"/>
      <variable name="Cm" units="picoF" initial_value="14"/>
      <variable name="i_app" units="picoA" initial_value="15"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <variable name="i_Na" units="picoA" public_interface="in"/>
      <variable name="i_Ca_L" units="picoA" public_interface="in"/>
      <variable name="i_Ca_T" units="picoA" public_interface="in"/>
      <variable name="i_K_dr" units="picoA" public_interface="in"/>
      <variable name="i_M" units="picoA" public_interface="in"/>
      <variable name="i_ir" units="picoA" public_interface="in"/>
      <variable name="i_d" units="picoA" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>i_app</ci>
                  <apply>
                     <plus/>
                     <ci>i_Na</ci>
                     <ci>i_Ca_L</ci>
                     <ci>i_Ca_T</ci>
                     <ci>i_K_dr</ci>
                     <ci>i_M</ci>
                     <ci>i_ir</ci>
                     <ci>i_d</ci>
                  </apply>
               </apply>
               <ci>Cm</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="sodium_current">
      <variable name="i_Na" units="picoA" public_interface="out"/>
      <variable name="g_Na" units="nanoS" initial_value="60"/>
      <variable name="V_Na" units="millivolt" initial_value="60"/>
      <variable name="O" units="dimensionless"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="A" units="dimensionless" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_Na</ci>
            <apply>
               <times/>
               <ci>g_Na</ci>
               <ci>O</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>V_Na</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>O</ci>
            <apply>
               <power/>
               <ci>A</ci>
               <cn cellml:units="dimensionless">3</cn>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="A">
      <variable name="A" units="dimensionless" initial_value="1" public_interface="out"/>
      <variable name="k1" units="first_order_rate_constant" public_interface="in"/>
      <variable name="k1_" units="first_order_rate_constant" public_interface="in"/>
      <variable name="alpha" units="first_order_rate_constant" public_interface="in"/>
      <variable name="beta" units="first_order_rate_constant" public_interface="in"/>
      <variable name="D" units="dimensionless" public_interface="in"/>
      <variable name="A_" units="dimensionless" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>A</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>alpha</ci>
                     <ci>D</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k1_</ci>
                     <ci>A_</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>beta</ci>
                     <ci>A</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k1</ci>
                     <ci>A</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="A_">
      <variable name="A_" units="dimensionless" initial_value="0" public_interface="out"/>
      <variable name="k1" units="first_order_rate_constant" public_interface="in"/>
      <variable name="k1_" units="first_order_rate_constant" public_interface="in"/>
      <variable name="alpha" units="first_order_rate_constant" public_interface="in"/>
      <variable name="beta" units="first_order_rate_constant" public_interface="in"/>
      <variable name="a" units="dimensionless" public_interface="in"/>
      <variable name="D_" units="dimensionless" public_interface="in"/>
      <variable name="A" units="dimensionless" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>A_</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>alpha</ci>
                     <ci>a</ci>
                     <ci>D_</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k1</ci>
                     <ci>A</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <apply>
                        <divide/>
                        <ci>beta</ci>
                        <ci>a</ci>
                     </apply>
                     <ci>A_</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k1_</ci>
                     <ci>A_</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="D">
      <variable name="D" units="dimensionless" initial_value="0" public_interface="out"/>
      <variable name="k2" units="first_order_rate_constant" public_interface="in"/>
      <variable name="k2_" units="first_order_rate_constant" public_interface="in"/>
      <variable name="alpha" units="first_order_rate_constant" public_interface="in"/>
      <variable name="beta" units="first_order_rate_constant" public_interface="in"/>
      <variable name="A" units="dimensionless" public_interface="in"/>
      <variable name="D_" units="dimensionless" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>D</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>beta</ci>
                     <ci>A</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k2_</ci>
                     <ci>D_</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>alpha</ci>
                     <ci>D</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k2</ci>
                     <ci>D</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="D_">
      <variable name="D_" units="dimensionless" initial_value="0" public_interface="out"/>
      <variable name="k2" units="first_order_rate_constant" public_interface="in"/>
      <variable name="k2_" units="first_order_rate_constant" public_interface="in"/>
      <variable name="alpha" units="first_order_rate_constant" public_interface="in"/>
      <variable name="beta" units="first_order_rate_constant" public_interface="in"/>
      <variable name="a" units="dimensionless" public_interface="in"/>
      <variable name="D" units="dimensionless" public_interface="in"/>
      <variable name="A_" units="dimensionless" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>D_</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <apply>
                        <divide/>
                        <ci>beta</ci>
                        <ci>a</ci>
                     </apply>
                     <ci>A_</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k2</ci>
                     <ci>D</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>alpha</ci>
                     <ci>a</ci>
                     <ci>D_</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k2_</ci>
                     <ci>D_</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="reaction_constants">
      <variable name="k1" units="first_order_rate_constant" initial_value="0.3" public_interface="out"/>
      <variable name="k1_" units="first_order_rate_constant" initial_value="0.03" public_interface="out"/>
      <variable name="k2" units="first_order_rate_constant" initial_value="0.001" public_interface="out"/>
      <variable name="k2_" units="first_order_rate_constant" initial_value="0.01" public_interface="out"/>
      <variable name="alpha" units="first_order_rate_constant" public_interface="out"/>
      <variable name="beta" units="first_order_rate_constant" public_interface="out"/>
      <variable name="a" units="dimensionless" public_interface="out"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha</ci>
            <apply>
               <divide/>
               <cn cellml:units="first_order_rate_constant">10</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">6</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="millivolt">10</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta</ci>
            <apply>
               <divide/>
               <cn cellml:units="first_order_rate_constant">10</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">54.4</cn>
                        </apply>
                        <cn cellml:units="millivolt">4.6</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>a</ci>
            <apply>
               <root/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>k1</ci>
                     <ci>k2_</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k1_</ci>
                     <ci>k2</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="L_type_calcium_current">
      <variable name="i_Ca_L" units="picoA" public_interface="out"/>
      <variable name="V_Ca" units="millivolt" initial_value="100" public_interface="out"/>
      <variable name="g_Ca_L" units="nanoS" initial_value="1.3"/>
      <variable name="time" units="millisecond" public_interface="in" private_interface="out"/>
      <variable name="V" units="millivolt" public_interface="in" private_interface="out"/>
      <variable name="m" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_Ca_L</ci>
            <apply>
               <times/>
               <ci>g_Ca_L</ci>
               <apply>
                  <power/>
                  <ci>m</ci>
                  <cn cellml:units="dimensionless">2</cn>
               </apply>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>V_Ca</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="L_type_calcium_current_m_gate">
      <variable name="m" units="dimensionless" initial_value="0" public_interface="out"/>
      <variable name="m_infinity" units="dimensionless"/>
      <variable name="tau_m" units="millisecond"/>
      <variable name="Vh" units="millivolt" initial_value="40"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>m_infinity</ci>
                  <ci>m</ci>
               </apply>
               <ci>tau_m</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>m_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>V</ci>
                              <ci>Vh</ci>
                           </apply>
                        </apply>
                        <cn cellml:units="millivolt">12</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>tau_m</ci>
            <apply>
               <divide/>
               <cn cellml:units="millisecond">5</cn>
               <apply>
                  <plus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">15</cn>
                        </apply>
                        <cn cellml:units="millivolt">25</cn>
                     </apply>
                  </apply>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">15</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="millivolt">25</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="T_type_calcium_current">
      <variable name="i_Ca_T" units="picoA" public_interface="out"/>
      <variable name="g_Ca_T" units="nanoS" initial_value="0.94"/>
      <variable name="time" units="millisecond" public_interface="in" private_interface="out"/>
      <variable name="V" units="millivolt" public_interface="in" private_interface="out"/>
      <variable name="V_Ca" units="millivolt" public_interface="in"/>
      <variable name="m" units="dimensionless" private_interface="in"/>
      <variable name="h" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_Ca_T</ci>
            <apply>
               <times/>
               <ci>g_Ca_T</ci>
               <apply>
                  <power/>
                  <ci>m</ci>
                  <cn cellml:units="dimensionless">2</cn>
               </apply>
               <ci>h</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>V_Ca</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="T_type_calcium_current_m_gate">
      <variable name="m" units="dimensionless" initial_value="0" public_interface="out"/>
      <variable name="m_infinity" units="dimensionless"/>
      <variable name="tau_m" units="millisecond"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>m_infinity</ci>
                  <ci>m</ci>
               </apply>
               <ci>tau_m</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>m_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">56.1</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="millivolt">10</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>tau_m</ci>
            <apply>
               <plus/>
               <apply>
                  <divide/>
                  <cn cellml:units="millisecond">7</cn>
                  <apply>
                     <plus/>
                     <apply>
                        <exp/>
                        <apply>
                           <divide/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">50</cn>
                           </apply>
                           <cn cellml:units="millivolt">9</cn>
                        </apply>
                     </apply>
                     <apply>
                        <exp/>
                        <apply>
                           <divide/>
                           <apply>
                              <minus/>
                              <apply>
                                 <plus/>
                                 <ci>V</ci>
                                 <cn cellml:units="millivolt">50</cn>
                              </apply>
                           </apply>
                           <cn cellml:units="millivolt">9</cn>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <cn cellml:units="millisecond">0.8</cn>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="T_type_calcium_current_h_gate">
      <variable name="h" units="dimensionless" initial_value="0" public_interface="out"/>
      <variable name="h_infinity" units="dimensionless"/>
      <variable name="tau_h" units="millisecond" initial_value="22"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>h</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>h_infinity</ci>
                  <ci>h</ci>
               </apply>
               <ci>tau_h</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>h_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">86.4</cn>
                        </apply>
                        <cn cellml:units="millivolt">4.7</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="delayed_rectifier_K_channel_current">
      <variable name="i_K_dr" units="picoA" public_interface="out"/>
      <variable name="V_K" units="millivolt" initial_value="-80" public_interface="out"/>
      <variable name="g_K_dr" units="nanoS" initial_value="20"/>
      <variable name="time" units="millisecond" public_interface="in" private_interface="out"/>
      <variable name="V" units="millivolt" public_interface="in" private_interface="out"/>
      <variable name="n" units="dimensionless" private_interface="in"/>
      <variable name="h" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_K_dr</ci>
            <apply>
               <times/>
               <ci>g_K_dr</ci>
               <apply>
                  <power/>
                  <ci>n</ci>
                  <cn cellml:units="dimensionless">4</cn>
               </apply>
               <ci>h</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>V_K</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="delayed_rectifier_K_channel_current_n_gate">
      <variable name="n" units="dimensionless" initial_value="0" public_interface="out"/>
      <variable name="n_infinity" units="dimensionless"/>
      <variable name="tau_n" units="millisecond"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>n</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>n_infinity</ci>
                  <ci>n</ci>
               </apply>
               <ci>tau_n</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>n_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">25</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="millivolt">15</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>tau_n</ci>
            <apply>
               <plus/>
               <apply>
                  <divide/>
                  <cn cellml:units="millisecond">15</cn>
                  <apply>
                     <plus/>
                     <apply>
                        <exp/>
                        <apply>
                           <divide/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">30</cn>
                           </apply>
                           <cn cellml:units="millivolt">15</cn>
                        </apply>
                     </apply>
                     <apply>
                        <exp/>
                        <apply>
                           <divide/>
                           <apply>
                              <minus/>
                              <apply>
                                 <plus/>
                                 <ci>V</ci>
                                 <cn cellml:units="millivolt">30</cn>
                              </apply>
                           </apply>
                           <cn cellml:units="millivolt">15</cn>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <cn cellml:units="millisecond">1</cn>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="delayed_rectifier_K_channel_current_h_gate">
      <variable name="h" units="dimensionless" initial_value="0" public_interface="out"/>
      <variable name="h_infinity" units="dimensionless"/>
      <variable name="tau_h" units="millisecond" initial_value="1000"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>h</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>h_infinity</ci>
                  <ci>h</ci>
               </apply>
               <ci>tau_h</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>h_infinity</ci>
            <apply>
               <plus/>
               <apply>
                  <divide/>
                  <cn cellml:units="dimensionless">0.7</cn>
                  <apply>
                     <plus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <exp/>
                        <apply>
                           <divide/>
                           <apply>
                              <minus/>
                              <apply>
                                 <plus/>
                                 <ci>V</ci>
                                 <cn cellml:units="millivolt">35</cn>
                              </apply>
                           </apply>
                           <cn cellml:units="millivolt">10</cn>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <cn cellml:units="dimensionless">0.3</cn>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="M_like_K_current">
      <variable name="i_M" units="picoA" public_interface="out"/>
      <variable name="g_M" units="nanoS" initial_value="4"/>
      <variable name="time" units="millisecond" public_interface="in" private_interface="out"/>
      <variable name="V" units="millivolt" public_interface="in" private_interface="out"/>
      <variable name="V_K" units="millivolt" public_interface="in"/>
      <variable name="n" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_M</ci>
            <apply>
               <times/>
               <ci>g_M</ci>
               <ci>n</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>V_K</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="M_like_K_current_n_gate">
      <variable name="n" units="dimensionless" initial_value="0" public_interface="out"/>
      <variable name="n_infinity" units="dimensionless"/>
      <variable name="tau_n" units="millisecond"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>n</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>n_infinity</ci>
                  <ci>n</ci>
               </apply>
               <ci>tau_n</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>n_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">37</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="millivolt">4</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>tau_n</ci>
            <apply>
               <divide/>
               <cn cellml:units="millisecond">80</cn>
               <apply>
                  <plus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">30</cn>
                        </apply>
                        <cn cellml:units="millivolt">15</cn>
                     </apply>
                  </apply>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">30</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="millivolt">15</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="inward_rectifier_K_current">
      <variable name="i_ir" units="picoA" public_interface="out"/>
      <variable name="g_ir" units="nanoS" initial_value="1.71"/>
      <variable name="time" units="millisecond" public_interface="in" private_interface="out"/>
      <variable name="V" units="millivolt" public_interface="in" private_interface="out"/>
      <variable name="V_K" units="millivolt" public_interface="in"/>
      <variable name="n_infinity" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_ir</ci>
            <apply>
               <times/>
               <ci>g_ir</ci>
               <ci>n_infinity</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>V_K</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="inward_rectifier_K_current_n_gate">
      <variable name="n_infinity" units="dimensionless" public_interface="out"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>n_infinity</ci>
            <apply>
               <plus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">0.8</cn>
                     <cn cellml:units="dimensionless">1</cn>
                  </apply>
                  <apply>
                     <plus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <exp/>
                        <apply>
                           <divide/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">80</cn>
                           </apply>
                           <cn cellml:units="millivolt">12</cn>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <cn cellml:units="dimensionless">0.2</cn>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="inward_leak_current">
      <variable name="i_d" units="picoA" public_interface="out"/>
      <variable name="g_d" units="nanoS" initial_value="0.044"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="V_Ca" units="millivolt" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_d</ci>
            <apply>
               <times/>
               <ci>g_d</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>V_Ca</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <group xmlns="http://www.cellml.org/cellml/1.0#">
      <relationship_ref relationship="containment"/>
      <component_ref component="membrane">
         <component_ref component="sodium_current"/>
         <component_ref component="L_type_calcium_current">
            <component_ref component="L_type_calcium_current_m_gate"/>
         </component_ref>
         <component_ref component="T_type_calcium_current">
            <component_ref component="T_type_calcium_current_m_gate"/>
            <component_ref component="T_type_calcium_current_h_gate"/>
         </component_ref>
         <component_ref component="delayed_rectifier_K_channel_current">
            <component_ref component="delayed_rectifier_K_channel_current_n_gate"/>
            <component_ref component="delayed_rectifier_K_channel_current_h_gate"/>
         </component_ref>
         <component_ref component="M_like_K_current">
            <component_ref component="M_like_K_current_n_gate"/>
         </component_ref>
         <component_ref component="inward_rectifier_K_current">
            <component_ref component="inward_rectifier_K_current_n_gate"/>
         </component_ref>
         <component_ref component="inward_leak_current"/>
      </component_ref>
   </group>
   <group xmlns="http://www.cellml.org/cellml/1.0#">
      <relationship_ref relationship="encapsulation"/>
      <component_ref component="L_type_calcium_current">
         <component_ref component="L_type_calcium_current_m_gate"/>
      </component_ref>
      <component_ref component="T_type_calcium_current">
         <component_ref component="T_type_calcium_current_m_gate"/>
         <component_ref component="T_type_calcium_current_h_gate"/>
      </component_ref>
      <component_ref component="delayed_rectifier_K_channel_current">
         <component_ref component="delayed_rectifier_K_channel_current_n_gate"/>
         <component_ref component="delayed_rectifier_K_channel_current_h_gate"/>
      </component_ref>
      <component_ref component="M_like_K_current">
         <component_ref component="M_like_K_current_n_gate"/>
      </component_ref>
      <component_ref component="inward_rectifier_K_current">
         <component_ref component="inward_rectifier_K_current_n_gate"/>
      </component_ref>
   </group>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="membrane" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="sodium_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="L_type_calcium_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="T_type_calcium_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="delayed_rectifier_K_channel_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="M_like_K_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="inward_rectifier_K_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="inward_leak_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="A" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="A_" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="D" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="D_" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="sodium_current" component_2="membrane"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_Na" variable_2="i_Na"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="L_type_calcium_current" component_2="membrane"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_Ca_L" variable_2="i_Ca_L"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="T_type_calcium_current" component_2="membrane"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_Ca_T" variable_2="i_Ca_T"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="delayed_rectifier_K_channel_current" component_2="membrane"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_K_dr" variable_2="i_K_dr"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="M_like_K_current" component_2="membrane"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_M" variable_2="i_M"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="inward_rectifier_K_current" component_2="membrane"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_ir" variable_2="i_ir"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="inward_leak_current" component_2="membrane"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_d" variable_2="i_d"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="reaction_constants" component_2="membrane"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="sodium_current" component_2="A"/>
      <map_variables variable_1="A" variable_2="A"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="A" component_2="D"/>
      <map_variables variable_1="A" variable_2="A"/>
      <map_variables variable_1="D" variable_2="D"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="A" component_2="A_"/>
      <map_variables variable_1="A" variable_2="A"/>
      <map_variables variable_1="A_" variable_2="A_"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="A_" component_2="D_"/>
      <map_variables variable_1="A_" variable_2="A_"/>
      <map_variables variable_1="D_" variable_2="D_"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="D" component_2="D_"/>
      <map_variables variable_1="D" variable_2="D"/>
      <map_variables variable_1="D_" variable_2="D_"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="A" component_2="reaction_constants"/>
      <map_variables variable_1="alpha" variable_2="alpha"/>
      <map_variables variable_1="beta" variable_2="beta"/>
      <map_variables variable_1="k1" variable_2="k1"/>
      <map_variables variable_1="k1_" variable_2="k1_"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="A_" component_2="reaction_constants"/>
      <map_variables variable_1="alpha" variable_2="alpha"/>
      <map_variables variable_1="beta" variable_2="beta"/>
      <map_variables variable_1="a" variable_2="a"/>
      <map_variables variable_1="k1" variable_2="k1"/>
      <map_variables variable_1="k1_" variable_2="k1_"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="D" component_2="reaction_constants"/>
      <map_variables variable_1="alpha" variable_2="alpha"/>
      <map_variables variable_1="beta" variable_2="beta"/>
      <map_variables variable_1="k2" variable_2="k2"/>
      <map_variables variable_1="k2_" variable_2="k2_"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="D_" component_2="reaction_constants"/>
      <map_variables variable_1="alpha" variable_2="alpha"/>
      <map_variables variable_1="beta" variable_2="beta"/>
      <map_variables variable_1="a" variable_2="a"/>
      <map_variables variable_1="k2" variable_2="k2"/>
      <map_variables variable_1="k2_" variable_2="k2_"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="L_type_calcium_current" component_2="T_type_calcium_current"/>
      <map_variables variable_1="V_Ca" variable_2="V_Ca"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="L_type_calcium_current" component_2="inward_leak_current"/>
      <map_variables variable_1="V_Ca" variable_2="V_Ca"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="delayed_rectifier_K_channel_current" component_2="M_like_K_current"/>
      <map_variables variable_1="V_K" variable_2="V_K"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="delayed_rectifier_K_channel_current" component_2="inward_rectifier_K_current"/>
      <map_variables variable_1="V_K" variable_2="V_K"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="L_type_calcium_current" component_2="L_type_calcium_current_m_gate"/>
      <map_variables variable_1="m" variable_2="m"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="T_type_calcium_current" component_2="T_type_calcium_current_m_gate"/>
      <map_variables variable_1="m" variable_2="m"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="T_type_calcium_current" component_2="T_type_calcium_current_h_gate"/>
      <map_variables variable_1="h" variable_2="h"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="delayed_rectifier_K_channel_current" component_2="delayed_rectifier_K_channel_current_n_gate"/>
      <map_variables variable_1="n" variable_2="n"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="delayed_rectifier_K_channel_current" component_2="delayed_rectifier_K_channel_current_h_gate"/>
      <map_variables variable_1="h" variable_2="h"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="M_like_K_current" component_2="M_like_K_current_n_gate"/>
      <map_variables variable_1="n" variable_2="n"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="inward_rectifier_K_current" component_2="inward_rectifier_K_current_n_gate"/>
      <map_variables variable_1="n_infinity" variable_2="n_infinity"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
</model>
