//   FILE :  vendelin_model_2000.xml
//
// CREATED :  6th November 2003
//
// LAST MODIFIED : 21st April 2005
//
// AUTHOR :  Catherine Lloyd
//           Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Vendelin et al.'s mathematical model of mitochondrial respiration in heart cells.
//
// CHANGES:
//     21/04/2005 - PJV - Changed unit dimensions to correct inconsistancy
// comment: FN Catherine Lloyd; This CellML model has been checked in both PCEnv and COR. However the model contains partial differential equations which are currently beyond the scope of the tools.
// created: W3CDTF 2003-11-06T00:00:00+13:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// reference: Pubmed_id 10751324; Given Marko; Family Vendelin; Given Olav; Family Kongas; Given Valdur; Family Saks; title Regulation of mitochondrial respiration in heart cells analyzed by reaction-diffusion model of energy transfer; volume 278; first_page C747; title American Journal of Physiology Cell Physiology; W3CDTF 2000-00-00 00:00; last_page C764
// reference: subject_type keyword; electrophysiology; cardiac; mitochondria
// comment: FN Catherine Lloyd; This file contains a CellML description of Vendelin et al.'s mathematical model of mitochondrial respiration in heart cells.
def model vendelin_model_2000 as
  // Creatine Kinase in Energy Metabolic Signalling in Muscle
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model has been checked in both OpenCell and COR. However the model contains partial differential equations which are currently beyond the scope of the CellML API.
  //
  // Model Structure
  //
  // ABSTRACT: The purpose of this study is to investigate theoretically which intracellular factors may be important for regulation of mitochondrial respiration in working heart cells in vivo. We have developed a model that describes quantitatively the published experimental data on dependence of the rate of oxygen consumption and metabolic state of working isolated perfused rat heart on workload over its physiological range (Williamson JR, Ford G, Illingworth J, Safer B. Circ Res 38, Suppl I, I39-I51, 1976). Analysis of this model shows that for phosphocreatine, creatine, and ATP the equilibrium assumption is an acceptable approximation with respect to their diffusion in the intracellular bulk water phase. However, the ADP concentration changes in the contraction cycle in a nonequilibrium workload-dependent manner, showing the existence of the intracellular concentration gradients. The model shows that workload-dependent alteration of ADP concentration in the compartmentalized creatine kinase system may be taken, together with the changes in P(i) concentration, to be among the major components of the metabolic feedback signal for regulation of respiration in muscle cells.
  //
  // The original paper reference is cited below:
  //
  // Regulation of mitochondrial respiration in heart cells analyzed by reaction-diffusion model of energy transfer, Marko Vendelin, Olav Kongas, and Valdur Saks, 2000, American Journal of Physiology - Cell Physiology, 278, C747-C764. PubMed ID: 10751324 (http://www.ncbi.nlm.nih.gov/pubmed/10751324)
  //
  // Schematic diagram of the two-dimensional compartmentalised energy transfer model of cardiac cells: the components of the model. The total diffusion pathway is 1.2 micrometres, including the outer mitochondrial membrane, the layer of myoplasm and the myofibril. Creatine kinase (CK) and myosin magnesium ATPase activities are distributed non-uniformly along the myofibril.
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit micromolar2_per_s as
    unit micromolar {expo: 2};
    unit second {expo: -1};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre_per_s as
    unit micrometre;
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit flux as
    unit micromolar;
    unit second {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit second {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit micromolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit kilojoule_per_mole as
    unit joule {pref: kilo};
    unit mole {expo: -1};
  enddef;
  def unit kilojoule_per_mole_kelvin as
    unit joule {pref: kilo};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit kilojoule_per_mole_millivolt as
    unit joule {pref: kilo};
    unit mole {expo: -1};
    unit millivolt {expo: -1};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  // title: ATP
  // alternative: adenosine triphosphate
  def comp ATP as
    var ATP: micromolar {pub: out};
    var G_CK: dimensionless {pub: in};
    var v_CK: flux {pub: in};
    var G_AK: dimensionless {pub: in};
    var v_AK: flux {pub: in};
    var G_H: dimensionless {pub: in};
    var H_ATP: flux {pub: in};
    var D_ATP: micromolar2_per_s {pub: in};
    var time: millisecond {pub: in};
    partialdiff(ATP, time) = D_ATP*ATP-G_CK*v_CK+G_AK*v_AK-G_H*H_ATP;
  enddef;

  // title: ADP
  // alternative: adenosine diphosphate
  def comp ADP as
    var ADP: micromolar {pub: out};
    var G_CK: dimensionless {pub: in};
    var v_CK: flux {pub: in};
    var G_AK: dimensionless {pub: in};
    var v_AK: flux {pub: in};
    var G_H: dimensionless {pub: in};
    var H_ATP: flux {pub: in};
    var D_ADP: micromolar2_per_s {pub: in};
    var time: millisecond {pub: in};
    partialdiff(ADP, time) = D_ADP*ADP+G_CK*v_CK-2.0{dimensionless}*G_AK*v_AK+G_H*H_ATP;
  enddef;

  // title: AMP
  // alternative: adenosine monophosphate
  def comp AMP as
    var AMP: micromolar {pub: out};
    var G_AK: dimensionless {pub: in};
    var v_AK: flux {pub: in};
    var D_AMP: micromolar2_per_s {pub: in};
    var time: millisecond {pub: in};
    partialdiff(AMP, time) = D_AMP*AMP+G_AK*v_AK;
  enddef;

  // title: PCr
  // alternative: phosphocreatine
  def comp PCr as
    var PCr: micromolar {pub: out};
    var G_CK: dimensionless {pub: in};
    var v_CK: flux {pub: in};
    var D_PCr: micromolar2_per_s {pub: in};
    var time: millisecond {pub: in};
    partialdiff(PCr, time) = D_PCr*PCr+G_CK*v_CK;
  enddef;

  // title: Cr
  // alternative: creatine
  def comp Cr as
    var Cr: micromolar {pub: out};
    var G_CK: dimensionless {pub: in};
    var v_CK: flux {pub: in};
    var D_Cr: micromolar2_per_s {pub: in};
    var time: millisecond {pub: in};
    partialdiff(Cr, time) = D_Cr*Cr+G_CK*v_CK;
  enddef;

  // title: Pi
  // alternative: inorganic phosphate
  def comp Pi as
    var Pi: micromolar {pub: out};
    var G_H: dimensionless {pub: in};
    var H_ATP: flux {pub: in};
    var D_Pi: micromolar2_per_s {pub: in};
    var time: millisecond {pub: in};
    partialdiff(Pi, time) = D_Pi*Pi+G_H*H_ATP;
  enddef;

  def comp v_CK as
    var v_CK: flux {pub: out};
    var Kia: micromolar {init: 9.0E2};
    var Kib: micromolar {init: 3.49E4};
    var Kc: micromolar;
    var Kb: micromolar {init: 1.55E4};
    var Kic: micromolar {init: 2.224E2};
    var KIb: micromolar {init: 3.49E4};
    var Kid: micromolar {init: 4.73E3};
    var Kd: micromolar {init: 1.67E3};
    var V1: flux {init: 1.30E4};
    var V1_: flux {init: 5.48E4};
    var DenCK: dimensionless;
    var mATP: micromolar {pub: in};
    var Cr: micromolar {pub: in};
    var PCr: micromolar {pub: in};
    var mADP: micromolar {pub: in};
    v_CK = (V1*(mATP*Cr/(Kia*Kb))-V1_*(mADP*PCr/(Kic*Kd)))/DenCK;
    DenCK = 1.0{dimensionless}+Cr/Kib+PCr/Kid+mATP*(1.0{dimensionless}/Kia+Cr/(Kia*Kb))+mADP*(1.0{dimensionless}/Kic+PCr/(Kid*Kc)+Cr/(Kic*KIb));
    Kc = Kic*Kd/Kid;
  enddef;

  // title: fATP
  // alternative: total Mg-free adenosine triphosphate
  def comp fATP as
    var fATP: micromolar {pub: out};
    var KDT: micromolar;
    var ATP: micromolar {pub: in};
    var Mg: micromolar {pub: in};
    fATP = ATP/(1.0{dimensionless}+Mg/KDT);
  enddef;

  // title: fATPx
  // alternative: mitochondrial matrix Mg-free adenosine triphosphate
  def comp fATPx as
    var fATPx: micromolar {pub: out};
    var KDTx: micromolar {init: 17.0};
    var ATPx: micromolar {pub: in};
    var Mgx: micromolar {pub: in};
    fATPx = ATPx/(1.0{dimensionless}+Mgx/KDTx);
  enddef;

  // title: fATPext
  // alternative: Cytoplasmic Mg-free adenosine triphosphate
  def comp fATPext as
    var fATPext: micromolar {pub: out};
    var KDText: micromolar {init: 24.0};
    var ATPext: micromolar {pub: in};
    var Mgext: micromolar {pub: in};
    fATPext = ATPext/(1.0{dimensionless}+Mgext/KDText);
  enddef;

  // title: fATPg
  // alternative: microcompartment Mg-free adenosine triphosphate
  def comp fATPg as
    var fATPg: micromolar {pub: out};
    var KDTg: micromolar;
    var ATPg: micromolar {pub: in};
    var Mgg: micromolar {pub: in};
    fATPg = ATPg/(1.0{dimensionless}+Mgg/KDTg);
  enddef;

  // title: fATPi
  // alternative: mitochondrial IM space Mg-free adenosine triphosphate
  def comp fATPi as
    var fATPi: micromolar {pub: out};
    var KDTi: micromolar;
    var ATPi: micromolar {pub: in};
    var Mgi: micromolar {pub: in};
    fATPi = ATPi/(1.0{dimensionless}+Mgi/KDTi);
  enddef;

  // title: mATP
  // alternative: total Mg-bound adenosine triphosphate
  def comp mATP as
    var mATP: micromolar {pub: out};
    var ATP: micromolar {pub: in};
    var fATP: micromolar {pub: in};
    mATP = ATP-fATP;
  enddef;

  // title: mATPx
  // alternative: mitochondrial matrix Mg-bound adenosine triphosphate
  def comp mATPx as
    var mATPx: micromolar;
    var ATPx: micromolar {pub: in};
    var fATPx: micromolar {pub: in};
    mATPx = ATPx-fATPx;
  enddef;

  // title: mATPext
  // alternative: myoplasmic Mg-bound adenosine triphosphate
  def comp mATPext as
    var mATPext: micromolar;
    var ATPext: micromolar {pub: in};
    var fATPext: micromolar {pub: in};
    mATPext = ATPext-fATPext;
  enddef;

  // title: mATPg
  // alternative: microcompartment Mg-bound adenosine triphosphate
  def comp mATPg as
    var mATPg: micromolar {pub: out};
    var ATPg: micromolar {pub: in};
    var fATPg: micromolar {pub: in};
    mATPg = ATPg-fATPg;
  enddef;

  // title: mATPi
  // alternative: mitochondrial IM space Mg-bound adenosine triphosphate
  def comp mATPi as
    var mATPi: micromolar {pub: out};
    var ATPi: micromolar {pub: in};
    var fATPi: micromolar {pub: in};
    mATPi = ATPi-fATPi;
  enddef;

  // title: fADP
  // alternative: total Mg-free adenosine diphosphate
  def comp fADP as
    var fADP: micromolar {pub: out};
    var KDD: micromolar;
    var ADP: micromolar {pub: in};
    var Mg: micromolar {pub: in};
    fADP = ADP/(1.0{dimensionless}+Mg/KDD);
  enddef;

  // title: fADPx
  // alternative: mitochondrial matrix Mg-free adenosine diphosphate
  def comp fADPx as
    var fADPx: micromolar {pub: out};
    var KDDx: micromolar {init: 282.0};
    var ADPx: micromolar {pub: in};
    var Mgx: micromolar {pub: in};
    fADPx = ADPx/(1.0{dimensionless}+Mgx/KDDx);
  enddef;

  // title: fADPext
  // alternative: myoplasmic Mg-free adenosine diphosphate
  def comp fADPext as
    var fADPext: micromolar {pub: out};
    var KDDext: micromolar {init: 347.0};
    var ADPext: micromolar {pub: in};
    var Mgext: micromolar {pub: in};
    fADPext = ADPext/(1.0{dimensionless}+Mgext/KDDext);
  enddef;

  // title: fADPg
  // alternative: microspace Mg-free adenosine diphosphate
  def comp fADPg as
    var fADPg: micromolar {pub: out};
    var KDDg: micromolar;
    var ADPg: micromolar {pub: in};
    var Mgg: micromolar {pub: in};
    fADPg = ADPg/(1.0{dimensionless}+Mgg/KDDg);
  enddef;

  // title: fADPi
  // alternative: mitochondrial IM space Mg-free adenosine diphosphate
  def comp fADPi as
    var fADPi: micromolar {pub: out};
    var KDDi: micromolar;
    var ADPi: micromolar {pub: in};
    var Mgi: micromolar {pub: in};
    fADPi = ADPi/(1.0{dimensionless}+Mgi/KDDi);
  enddef;

  // title: mADP
  // alternative: total Mg-bound adenosine diphosphate
  def comp mADP as
    var mADP: micromolar {pub: out};
    var ADP: micromolar {pub: in};
    var fADP: micromolar {pub: in};
    mADP = ADP-fADP;
  enddef;

  // title: mADPx
  // alternative: mitochondrial matrix Mg-bound adenosine diphosphate
  def comp mADPx as
    var mADPx: micromolar;
    var ADPx: micromolar {pub: in};
    var fADPx: micromolar {pub: in};
    mADPx = ADPx-fADPx;
  enddef;

  // title: mADPext
  // alternative: myoplasmic Mg-bound adenosine diphosphate
  def comp mADPext as
    var mADPext: micromolar;
    var ADPext: micromolar {pub: in};
    var fADPext: micromolar {pub: in};
    mADPext = ADPext-fADPext;
  enddef;

  // title: mADPg
  // alternative: microspace Mg-bound adenosine diphosphate
  def comp mADPg as
    var mADPg: micromolar {pub: out};
    var ADPg: micromolar {pub: in};
    var fADPg: micromolar {pub: in};
    mADPg = ADPg-fADPg;
  enddef;

  // title: mADPi
  // alternative: mitochondrial IM space Mg-bound adenosine diphosphate
  def comp mADPi as
    var mADPi: micromolar {pub: out};
    var ADPi: micromolar {pub: in};
    var fADPi: micromolar {pub: in};
    mADPi = ADPi-fADPi;
  enddef;

  def comp v_AK as
    var v_AK: flux {pub: out};
    var kfa: second_order_rate_constant {init: 63.8};
    var kba: second_order_rate_constant {init: 1.68};
    var fADP: micromolar {pub: in};
    var mATP: micromolar {pub: in};
    var AMP: micromolar {pub: in};
    var mADP: micromolar {pub: in};
    v_AK = kfa*fADP*mADP-kba*mATP*AMP;
  enddef;

  def comp v_AKmit as
    var v_AKmit: flux {pub: out};
    var kfa: second_order_rate_constant {init: 63.8};
    var kba: second_order_rate_constant {init: 1.68};
    var fADP: micromolar {pub: in};
    var mATP: micromolar {pub: in};
    var AMP: micromolar {pub: in};
    var mADP: micromolar {pub: in};
    v_AKmit = kfa*fADP*mADP-kba*mATP*AMP;
  enddef;

  // title: H_ATP
  // alternative: ATP hydrolysis function
  def comp H_ATP as
    var H_ATP: flux {pub: out};
    var H_ATPmax: flux {init: 3.626E4};
    var time: millisecond {pub: in};
    H_ATP = sel
      case (time >= 0.0{millisecond}) and (time < 30.0{millisecond}):
        time/30.0{millisecond}*H_ATPmax;
      case (time >= 30.0{millisecond}) and (time < 60.0{millisecond}):
        60.0{millisecond}*time/30.0{millisecond}*H_ATPmax;
      case (time >= 60.0{millisecond}) and (time < 180.0{millisecond}):
        0.0{flux};
    endsel;
  enddef;

  // title: G_CK
  // alternative: spatial distribution of CK
  def comp G_CK as
    var G_CK: dimensionless {pub: out};
    var x: micrometre;
    var y: micrometre;
    G_CK = sel
      case (x < 0.375{micrometre}) and (y < 1.0{micrometre}):
        0.94{dimensionless}*(1.0{dimensionless}-x/0.375{micrometre});
      case (x >= 0.375{micrometre}) and (x < 0.75{micrometre}) and (y < 1.0{micrometre}):
        1.61{dimensionless}*((x-0.375{micrometre})/0.375{micrometre});
      case (x >= 0.375{micrometre}) or (y >= 1.0{micrometre}):
        1.61{dimensionless};
    endsel;
  enddef;

  // title: G_AK
  // alternative: spatial distribution of AK
  def comp G_AK as
    var G_AK: dimensionless {pub: out};
    var G_CK: dimensionless {pub: in};
    G_AK = G_CK;
  enddef;

  // title: G_H
  // alternative: spatial distribution of ATPase
  def comp G_H as
    var G_H: dimensionless {pub: out};
    var x: micrometre;
    var y: micrometre;
    G_H = sel
      case (x < 0.125{micrometre}) and (y < 1.0{micrometre}):
        4.0{dimensionless}/3.0{dimensionless}*(x/0.125{micrometre});
      case (x >= 0.125{micrometre}) and (x < 0.75{micrometre}) and (y < 1.0{micrometre}):
        4.0{dimensionless}/3.0{dimensionless};
      case (x >= 0.75{micrometre}) and (x < 0.875{micrometre}) and (y < 1.0{micrometre}):
        4.0{dimensionless}/3.0{dimensionless}*(1.0{dimensionless}-(x-0.75{micrometre})/0.125{micrometre});
      case (x >= 0.875{micrometre}) or (y >= 1.0{micrometre}):
        0.0{dimensionless};
    endsel;
  enddef;

  def comp diffusion_through_mitochondrial_membrane as
    var ATP_diff: flux;
    var ADP_diff: flux;
    var AMP_diff: flux;
    var PCr_diff: flux;
    var Cr_diff: flux;
    var Pi_diff: flux;
    var ATP: micromolar {pub: in};
    var ADP: micromolar {pub: in};
    var AMP: micromolar {pub: in};
    var PCr: micromolar {pub: in};
    var Cr: micromolar {pub: in};
    var Pi: micromolar {pub: in};
    var ATPi: micromolar {pub: in};
    var ADPi: micromolar {pub: in};
    var AMPi: micromolar {pub: in};
    var PCri: micromolar {pub: in};
    var Cri: micromolar {pub: in};
    var Pii: micromolar {pub: in};
    var R_ATP: micrometre_per_s {pub: in};
    var R_ADP: micrometre_per_s {pub: in};
    var R_AMP: micrometre_per_s {pub: in};
    var R_PCr: micrometre_per_s {pub: in};
    var R_Cr: micrometre_per_s {pub: in};
    var R_Pi: micrometre_per_s {pub: in};
    var D_ATP: micromolar2_per_s {pub: in};
    var D_ADP: micromolar2_per_s {pub: in};
    var D_AMP: micromolar2_per_s {pub: in};
    var D_PCr: micromolar2_per_s {pub: in};
    var D_Cr: micromolar2_per_s {pub: in};
    var D_Pi: micromolar2_per_s {pub: in};
    var n: dimensionless;
    partialdiff(ATP_diff, n) = R_ATP*(ATPi-ATP)/D_ATP;
    partialdiff(ADP_diff, n) = R_ADP*(ADPi-ADP)/D_ADP;
    partialdiff(AMP_diff, n) = R_AMP*(AMPi-AMP)/D_AMP;
    partialdiff(PCr_diff, n) = R_PCr*(PCri-PCr)/D_PCr;
    partialdiff(Cr_diff, n) = R_Cr*(Cri-Cr)/D_Cr;
    partialdiff(Pi_diff, n) = R_Pi*(Pii-Pi)/D_Pi;
  enddef;

  // title: ATPi
  // alternative: IM space adenosine triphosphate
  def comp ATPi as
    var ATPi: micromolar {pub: out};
    var R_ATP: micrometre_per_s {pub: in};
    var FVi: dimensionless {pub: in};
    var v_ANT: flux {pub: in};
    var v_MiCK: flux {pub: in};
    var v_AKmit: flux {pub: in};
    var ATP: micromolar {pub: in};
    var Li: micrometre {pub: in};
    var time: millisecond {pub: in};
    ode(ATPi, time) = R_ATP/Li*(ATP-ATPi)+v_ANT/FVi-v_MiCK/FVi+v_AKmit/FVi;
  enddef;

  // title: ADPi
  // alternative: IM space adenosine diphosphate
  def comp ADPi as
    var ADPi: micromolar {pub: out};
    var R_ADP: micrometre_per_s {pub: in};
    var FVi: dimensionless {pub: in};
    var v_ANT: flux {pub: in};
    var v_MiCK: flux {pub: in};
    var v_AKmit: flux {pub: in};
    var ADP: micromolar {pub: in};
    var Li: micrometre {pub: in};
    var time: millisecond {pub: in};
    ode(ADPi, time) = R_ADP/Li*(ADP-ADPi)-(2.0{dimensionless}*v_AKmit/FVi+v_ANT/FVi)+v_MiCK/FVi;
  enddef;

  // title: AMPi
  // alternative: IM space adenosine monophosphate
  def comp AMPi as
    var AMPi: micromolar {pub: out};
    var R_AMP: micrometre_per_s {pub: in};
    var FVi: dimensionless {pub: in};
    var v_AKmit: flux {pub: in};
    var AMP: micromolar {pub: in};
    var Li: micrometre {pub: in};
    var time: millisecond {pub: in};
    ode(AMPi, time) = R_AMP/Li*(AMP-AMPi)+v_AKmit/FVi;
  enddef;

  // title: PCri
  // alternative: IM space phosphocreatine
  def comp PCri as
    var PCri: micromolar {pub: out};
    var R_PCr: micrometre_per_s {pub: in};
    var FVi: dimensionless {pub: in};
    var v_AKmit: flux {pub: in};
    var PCr: micromolar {pub: in};
    var Li: micrometre {pub: in};
    var time: millisecond {pub: in};
    ode(PCri, time) = R_PCr/Li*(PCr-PCri)+v_AKmit/FVi;
  enddef;

  // title: Cri
  // alternative: IM space creatine
  def comp Cri as
    var Cri: micromolar {pub: out};
    var R_Cr: micrometre_per_s {pub: in};
    var FVi: dimensionless {pub: in};
    var v_MiCK: flux {pub: in};
    var Cr: micromolar {pub: in};
    var Li: micrometre {pub: in};
    var time: millisecond {pub: in};
    ode(Cri, time) = R_Cr/Li*(Cr-Cri)-v_MiCK/FVi;
  enddef;

  // title: Pii
  // alternative: IM space creatine
  def comp Pii as
    var Pii: micromolar {pub: out};
    var R_Pi: micrometre_per_s {pub: in};
    var FVi: dimensionless {pub: in};
    var v_PI: flux {pub: in};
    var Pi: micromolar {pub: in};
    var Li: micrometre {pub: in};
    var time: millisecond {pub: in};
    ode(Pii, time) = R_Pi/Li*(Pi-Pii)-v_PI/FVi;
  enddef;

  def comp v_MiCK as
    var v_MiCK: flux {pub: out};
    var v_MiCK_G: flux;
    var v_MiCK_I: flux;
    var V1: flux {init: 7.7E3};
    var V1_: flux {init: 2.97E4};
    var Kia_G: micromolar {init: 7.12E2};
    var Kia: micromolar {init: 1.61E2};
    var Kic_G: micromolar {init: 1.42E2};
    var Kic: micromolar {init: 1.10E4};
    var Kd: micromolar {init: 5.0E2};
    var Kb: micromolar {init: 5.2E3};
    var DenMiCK: dimensionless;
    var Kib: micromolar {init: 2.6E4};
    var Kid: micromolar {init: 1.6E3};
    var KIb: micromolar {init: 2.6E4};
    var PCri: micromolar {pub: in};
    var Cri: micromolar {pub: in};
    var mATPg: micromolar {pub: in};
    var mATPi: micromolar {pub: in};
    var mADPg: micromolar {pub: in};
    var mADPi: micromolar {pub: in};
    v_MiCK = v_MiCK_G+v_MiCK_I;
    v_MiCK_G = (V1*(mATPg*Cri/(Kia_G*Kb))-V1_*(mADPg*PCri/(Kic_G*Kd)))/DenMiCK;
    v_MiCK_I = (V1*(mATPi*Cri/(Kia*Kb))-V1_*(mADPi*PCri/(Kic*Kd)))/DenMiCK;
    DenMiCK = 1.0{dimensionless}+Cri/Kib+PCri/Kid+(mATPg/Kia_G+mATPi/Kia)*(1.0{dimensionless}+Cri/Kb)+(mADPg/Kic_G+mADPi/Kic)*(1.0{dimensionless}+PCri/Kd+Cri/KIb);
  enddef;

  def comp v_exch as
    var v_exch_ATP: flux {pub: out};
    var v_exch_ADP: flux {pub: out};
    var R_exch_ATP: first_order_rate_constant {init: 1.88};
    var R_exch_ADP: first_order_rate_constant {init: 1.88};
    var ATPi: micromolar {pub: in};
    var ADPi: micromolar {pub: in};
    var ATPg: micromolar {pub: in};
    var ADPg: micromolar {pub: in};
    v_exch_ATP = R_exch_ATP*(ATPi-ATPg);
    v_exch_ADP = R_exch_ADP*(ADPi-ADPg);
  enddef;

  // title: UQ
  // alternative: oxidised coenzyme Q
  def comp UQ as
    var UQ: micromolar {pub: out};
    var FVx: dimensionless {pub: in};
    var v_C1: flux {pub: in};
    var v_C3: flux {pub: in};
    var time: millisecond {pub: in};
    ode(UQ, time) = (v_C3-v_C1)/FVx;
  enddef;

  // title: c3plus
  // alternative: oxidised cytochrome c
  def comp c3plus as
    var c3plus: micromolar {pub: out};
    var FVx: dimensionless {pub: in};
    var v_O2: flux {pub: in};
    var v_C3: flux {pub: in};
    var time: millisecond {pub: in};
    ode(c3plus, time) = 2.0{dimensionless}*(2.0{dimensionless}*v_O2-v_C3)/FVx;
  enddef;

  // title: NAD
  // alternative: matrix NAD
  def comp NAD as
    var NAD: micromolar {pub: out};
    var v_dh: flux {pub: in};
    var FVx: dimensionless {pub: in};
    var v_C1: flux {pub: in};
    var time: millisecond {pub: in};
    ode(NAD, time) = (v_C1-v_dh)/FVx;
  enddef;

  // title: Hx
  // alternative: matrix H
  def comp Hx as
    var Hx: micromolar {pub: out};
    var delta_Hx: flux {pub: out};
    var na: dimensionless {pub: in};
    var r_buff: molar {pub: in};
    var FVx: dimensionless {pub: in};
    var v_O2: flux {pub: in};
    var v_C1: flux {pub: in};
    var v_sn: flux {pub: in};
    var v_C3: flux {pub: in};
    var v_ANT: flux {pub: in};
    var v_PI: flux {pub: in};
    var v_leak: flux {pub: in};
    var u: dimensionless {pub: in};
    var time: millisecond {pub: in};
    ode(Hx, time) = delta_Hx;
    delta_Hx = -(2.0{dimensionless}*(2.0{dimensionless}+u)*v_O2+4.0{dimensionless}*v_C1+(4.0{dimensionless}-2.0{dimensionless}*u)*v_C3-(na*v_sn+v_ANT*u+(1.0{dimensionless}-u)*v_PI+v_leak))/(FVx*r_buff);
  enddef;

  // title: ATPx
  // alternative: matrix ATP
  def comp ATPx as
    var ATPx: micromolar {pub: out};
    var FVx: dimensionless {pub: in};
    var v_sn: flux {pub: in};
    var v_ANT: flux {pub: in};
    var time: millisecond {pub: in};
    ode(ATPx, time) = (v_sn-v_ANT)/FVx;
  enddef;

  // title: Pix
  // alternative: matrix Pi
  def comp Pix as
    var Pix: micromolar {pub: out};
    var FVx: dimensionless {pub: in};
    var v_sn: flux {pub: in};
    var v_PI: flux {pub: in};
    var time: millisecond {pub: in};
    ode(Pix, time) = (v_PI-v_sn)/FVx;
  enddef;

  def comp oxidative_phosphorylation as
    var v_dh: flux {pub: out};
    var v_C1: flux {pub: out};
    var v_C3: flux {pub: out};
    var v_O2: flux {pub: out};
    var v_sn: flux {pub: out};
    var v_leak: flux {pub: out};
    var v_PI: flux {pub: out};
    var k_L1: flux {init: 2.1895E3};
    var k_L2: per_millivolt {init: 0.003};
    var k_dh: flux {init: 5.75E4};
    var k_sn: flux {init: 2.96E4};
    var k_C1: flux {init: 2.0E2};
    var k_C3: flux {init: 1.142E2};
    var k_C4: second_order_rate_constant {init: 2.351};
    var k_mO: micromolar {init: 150.0};
    var k_mN: dimensionless {init: 100.0};
    var pD: dimensionless {init: 0.8};
    var O2: micromolar {init: 2.4E2};
    var vfPI: second_order_rate_constant {init: 138.5};
    var vbPI: second_order_rate_constant {init: 138.5};
    var pKa: dimensionless {init: 6.8};
    var delta_p: dimensionless {pub: in};
    var delta_Gsn: dimensionless {pub: in};
    var Z: millivolt {pub: in};
    var En: millivolt {pub: in};
    var Eu: millivolt {pub: in};
    var Ec: millivolt {pub: in};
    var Ea: millivolt {pub: in};
    var NADH: micromolar {pub: in};
    var NAD: micromolar {pub: in};
    var c2plus: micromolar {pub: in};
    var a2plus: micromolar {pub: in};
    var Pii: micromolar {pub: in};
    var Pix: micromolar {pub: in};
    var Hext: micromolar {pub: in};
    var Hx: micromolar {pub: in};
    var pHx: dimensionless {pub: in};
    var pHext: dimensionless {pub: in};
    var u: dimensionless {pub: in};
    v_dh = k_dh/pow(1.0{dimensionless}+k_mN/(NAD/NADH), pD);
    v_C1 = k_C1*(Eu-(En+2.0{dimensionless}*delta_p));
    v_C3 = k_C3*(Ec-(Eu+(2.0{dimensionless}-u)*delta_p));
    v_O2 = 0.5{dimensionless}*k_C4*a2plus*c2plus*(O2/(O2+k_mO));
    v_sn = k_sn*((pow(10.0{dimensionless}, delta_Gsn/Z)-1.0{dimensionless})/(pow(10.0{dimensionless}, delta_Gsn/Z)+1.0{dimensionless}));
    v_PI = vfPI*Hext*(Pii/(1.0{dimensionless}+pow(10.0{dimensionless}, pHext-pKa)))-vbPI*Hx*(Pix/(1.0{dimensionless}+pow(10.0{dimensionless}, pHx-pKa)));
    v_leak = k_L1*(pow(10.0{dimensionless}, k_L2*delta_p)-1.0{dimensionless});
  enddef;

  def comp NADH as
    var NADH: micromolar {pub: out};
    var NAD_tot: micromolar {init: 2.97E3};
    var NAD: micromolar {pub: in};
    NADH = NAD_tot-NAD;
  enddef;

  def comp UQH2 as
    var UQH2: micromolar {pub: out};
    var UQ_tot: micromolar {init: 1.35E3};
    var UQ: micromolar {pub: in};
    UQH2 = UQ_tot-UQ;
  enddef;

  def comp c2plus as
    var ctot: micromolar {init: 2.7E2};
    var c2plus: micromolar {pub: out};
    var c3plus: micromolar {pub: in};
    c2plus = ctot-c3plus;
  enddef;

  def comp a2plus as
    var atot: micromolar {init: 1.35E2};
    var a2plus: micromolar {pub: out};
    var a3_2: micromolar {pub: in};
    a2plus = atot-a3_2;
  enddef;

  def comp ADPx as
    var Ax: micromolar {init: 1.0E4};
    var ATPx: micromolar {pub: in};
    var ADPx: micromolar {pub: out};
    ADPx = Ax-ATPx;
  enddef;

  def comp pHx as
    var pHx: dimensionless {pub: out};
    var eta: dimensionless {pub: in};
    var Hx: micromolar {pub: in};
    pHx = -log(eta*Hx);
  enddef;

  def comp delta_pH as
    var delta_pH: dimensionless {pub: out};
    var pHx: dimensionless {pub: in};
    var pHext: dimensionless {pub: in};
    var Z: millivolt {pub: in};
    delta_pH = Z*(pHext-pHx);
  enddef;

  def comp delta_p as
    var delta_p: dimensionless {pub: out};
    var u: dimensionless {pub: in};
    var delta_pH: dimensionless {pub: in};
    delta_p = 1.0{dimensionless}/(1.0{dimensionless}-u)*delta_pH;
  enddef;

  def comp delta_psi as
    var delta_psi: dimensionless {pub: out};
    var delta_p: dimensionless {pub: in};
    var delta_pH: dimensionless {pub: in};
    delta_psi = -(delta_p-delta_pH);
  enddef;

  def comp Hext as
    var Hext: micromolar {pub: out};
    var eta: dimensionless {pub: in};
    var pHext: dimensionless {pub: in};
    Hext = eta*pow(1.0{dimensionless}, -pHext);
  enddef;

  def comp r_buff as
    var r_buff: molar {pub: out};
    var r_buff0: molar {init: 0.022};
    var delta_pH: dimensionless {pub: in};
    var delta_Hx: flux {pub: in};
    var eta: dimensionless {pub: in};
    var pHx: dimensionless {pub: in};
    r_buff = r_buff0*eta*(delta_pH/delta_Hx);
  enddef;

  def comp Z as
    var Z: millivolt {pub: out};
    var T: kelvin {pub: in};
    var R: kilojoule_per_mole_kelvin {pub: in};
    var F: kilojoule_per_mole_millivolt {pub: in};
    Z = ln(10.0{dimensionless})*(R*T/F);
  enddef;

  def comp v_ANT as
    var v_ANT: flux {pub: out, init: 5.70E3};
    var v_ANT_XG: flux;
    var v_ANT_XI: flux;
    var Kg: micromolar {init: 4.25};
    var Ki: micromolar {init: 4.25};
    var Z: millivolt {pub: in};
    var delta_psi: dimensionless {pub: in};
    var fADPi: micromolar {pub: in};
    var fATPi: micromolar {pub: in};
    var fADPg: micromolar {pub: in};
    var fATPg: micromolar {pub: in};
    var fADPx: micromolar {pub: in};
    var fATPx: micromolar {pub: in};
    v_ANT = v_ANT_XG+v_ANT_XI;
    v_ANT_XG = v_ANT*(fADPg/(Kg*((10.0{dimensionless}+fADPg)/(Kg+fADPi/Ki))))*(fADPg/(fATPg*pow(10.0{dimensionless}, -0.35{dimensionless}*delta_psi/Z)+fADPg)-fADPx/(fATPx*pow(10.0{dimensionless}, -0.65{dimensionless}*delta_psi/Z)+fADPx));
    v_ANT_XI = v_ANT*(fADPi/(Ki*((10.0{dimensionless}+fADPg)/(Kg+fADPi/Ki))))*(fADPi/(fATPi*pow(10.0{dimensionless}, -0.35{dimensionless}*delta_psi/Z)+fADPi)-fADPx/(fATPx*pow(10.0{dimensionless}, -0.65{dimensionless}*delta_psi/Z)+fADPx));
  enddef;

  def comp delta_Gsn as
    var delta_Gsn: dimensionless {pub: out};
    var delta_Gsn0: kilojoule_per_mole {init: 31.9};
    var delta_p: dimensionless {pub: in};
    var na: dimensionless {pub: in};
    var Z: millivolt {pub: in};
    var eta: dimensionless {pub: in};
    var F: kilojoule_per_mole_millivolt {pub: in};
    var ADPx: micromolar {pub: in};
    var ATPx: micromolar {pub: in};
    var Pix: micromolar {pub: in};
    delta_Gsn = na*delta_p-delta_Gsn0/F+Z*log(eta*ATPx/(ADPx*Pix));
  enddef;

  def comp redox_potentials as
    var En: millivolt {pub: out};
    var Eu: millivolt {pub: out};
    var Ec: millivolt {pub: out};
    var Ea: millivolt {pub: out};
    var a3_2: micromolar {pub: out};
    var En0: millivolt {init: -320.0};
    var Eu0: millivolt {init: 85.0};
    var Ec0: millivolt {init: 250.0};
    var Ea0: millivolt {init: 540.0};
    var delta_p: dimensionless {pub: in};
    var u: dimensionless {pub: in};
    var Z: millivolt {pub: in};
    var NAD: micromolar {pub: in};
    var NADH: micromolar {pub: in};
    var UQ: micromolar {pub: in};
    var UQH2: micromolar {pub: in};
    var c3plus: micromolar {pub: in};
    var c2plus: micromolar {pub: in};
    En = En0+Z/2.0{dimensionless}*log(NAD/NADH);
    Eu = Eu0+Z/2.0{dimensionless}*log(UQ/UQH2);
    Ec = Ec0+Z/2.0{dimensionless}*log(c3plus/c2plus);
    Ea = Ec+(1.0{dimensionless}+u)*delta_p;
    a3_2 = pow(10.0{micromolar}, (Ea-Ea0)*Z);
  enddef;

  def comp diffusion_constants as
    var D_ATP: micromolar2_per_s {pub: out, init: 1.45E2};
    var D_ADP: micromolar2_per_s {pub: out, init: 1.45E2};
    var D_AMP: micromolar2_per_s {pub: out, init: 1.45E2};
    var D_PCr: micromolar2_per_s {pub: out, init: 2.6E2};
    var D_Cr: micromolar2_per_s {pub: out, init: 2.6E2};
    var D_Pi: micromolar2_per_s {pub: out, init: 3.27E2};
  enddef;

  def comp Mg_buffering as
    var Mg: micromolar {pub: out};
    var Mgg: micromolar {pub: out};
    var Mgi: micromolar {pub: out};
    var Mgext: micromolar {pub: out, init: 1.0E3};
    var Mgx: micromolar {pub: out, init: 380.0};
    var ATPg: micromolar {pub: out};
    var ADPg: micromolar {pub: out};
    var ATPext: micromolar {pub: out};
    var ADPext: micromolar {pub: out};
  enddef;

  def comp H_buffering as
    var pHext: dimensionless {pub: out, init: 6.9};
  enddef;

  def comp diffusion_through_mitochondrial_membrane_parameters as
    var Li: micrometre {pub: out, init: 0.1};
    var R_ATP: micrometre_per_s {pub: out, init: 0.16};
    var R_ADP: micrometre_per_s {pub: out, init: 0.16};
    var R_AMP: micrometre_per_s {pub: out, init: 0.16};
    var R_PCr: micrometre_per_s {pub: out, init: 260.0};
    var R_Cr: micrometre_per_s {pub: out, init: 260.0};
    var R_Pi: micrometre_per_s {pub: out, init: 327.0};
  enddef;

  def comp general_constants as
    var R: kilojoule_per_mole_kelvin {pub: out, init: 0.0083};
    var T: kelvin {pub: out, init: 298.0};
    var F: kilojoule_per_mole_millivolt {pub: out, init: 0.0965};
    var u: dimensionless {pub: out, init: 0.861};
    var eta: dimensionless {pub: out, init: 10E6};
    var na: dimensionless {pub: out, init: 2.5};
  enddef;

  def comp fractional_volumes as
    var FVx: dimensionless {pub: out, init: 0.1875};
    var FVi: dimensionless {pub: out, init: 0.0625};
  enddef;
  def map between ATP and G_CK for
    vars G_CK and G_CK;
  enddef;
  def map between ATP and v_CK for
    vars v_CK and v_CK;
  enddef;
  def map between ATP and G_AK for
    vars G_AK and G_AK;
  enddef;
  def map between ATP and v_AK for
    vars v_AK and v_AK;
  enddef;
  def map between ATP and G_H for
    vars G_H and G_H;
  enddef;
  def map between ATP and H_ATP for
    vars H_ATP and H_ATP;
  enddef;
  def map between ATP and diffusion_constants for
    vars D_ATP and D_ATP;
  enddef;
  def map between ADP and G_CK for
    vars G_CK and G_CK;
  enddef;
  def map between ADP and v_CK for
    vars v_CK and v_CK;
  enddef;
  def map between ADP and G_AK for
    vars G_AK and G_AK;
  enddef;
  def map between ADP and v_AK for
    vars v_AK and v_AK;
  enddef;
  def map between ADP and G_H for
    vars G_H and G_H;
  enddef;
  def map between ADP and H_ATP for
    vars H_ATP and H_ATP;
  enddef;
  def map between ADP and diffusion_constants for
    vars D_ADP and D_ADP;
  enddef;
  def map between AMP and G_AK for
    vars G_AK and G_AK;
  enddef;
  def map between AMP and v_AK for
    vars v_AK and v_AK;
    vars AMP and AMP;
  enddef;
  def map between AMP and diffusion_constants for
    vars D_AMP and D_AMP;
  enddef;
  def map between G_AK and G_CK for
    vars G_CK and G_CK;
  enddef;
  def map between PCr and G_CK for
    vars G_CK and G_CK;
  enddef;
  def map between PCr and v_CK for
    vars v_CK and v_CK;
    vars PCr and PCr;
  enddef;
  def map between PCr and diffusion_constants for
    vars D_PCr and D_PCr;
  enddef;
  def map between Cr and G_CK for
    vars G_CK and G_CK;
  enddef;
  def map between Cr and v_CK for
    vars v_CK and v_CK;
    vars Cr and Cr;
  enddef;
  def map between Cr and diffusion_constants for
    vars D_Cr and D_Cr;
  enddef;
  def map between Pi and G_H for
    vars G_H and G_H;
  enddef;
  def map between Pi and H_ATP for
    vars H_ATP and H_ATP;
  enddef;
  def map between Pi and diffusion_constants for
    vars D_Pi and D_Pi;
  enddef;
  def map between v_CK and mATP for
    vars mATP and mATP;
  enddef;
  def map between v_CK and mADP for
    vars mADP and mADP;
  enddef;
  def map between fATP and ATP for
    vars ATP and ATP;
  enddef;
  def map between fATP and Mg_buffering for
    vars Mg and Mg;
  enddef;
  def map between mATP and fATP for
    vars fATP and fATP;
  enddef;
  def map between mATP and ATP for
    vars ATP and ATP;
  enddef;
  def map between fADP and ADP for
    vars ADP and ADP;
  enddef;
  def map between fADP and Mg_buffering for
    vars Mg and Mg;
  enddef;
  def map between mADP and fADP for
    vars fADP and fADP;
  enddef;
  def map between mADP and ADP for
    vars ADP and ADP;
  enddef;
  def map between v_AK and fADP for
    vars fADP and fADP;
  enddef;
  def map between v_AK and mATP for
    vars mATP and mATP;
  enddef;
  def map between v_AK and mADP for
    vars mADP and mADP;
  enddef;
  def map between v_AKmit and fADP for
    vars fADP and fADP;
  enddef;
  def map between v_AKmit and mATP for
    vars mATP and mATP;
  enddef;
  def map between v_AKmit and mADP for
    vars mADP and mADP;
  enddef;
  def map between v_AKmit and AMP for
    vars AMP and AMP;
  enddef;
  def map between diffusion_through_mitochondrial_membrane and ATP for
    vars ATP and ATP;
  enddef;
  def map between diffusion_through_mitochondrial_membrane and ATPi for
    vars ATPi and ATPi;
  enddef;
  def map between diffusion_through_mitochondrial_membrane and ADP for
    vars ADP and ADP;
  enddef;
  def map between diffusion_through_mitochondrial_membrane and ADPi for
    vars ADPi and ADPi;
  enddef;
  def map between diffusion_through_mitochondrial_membrane_parameters and ATPi for
    vars R_ATP and R_ATP;
    vars Li and Li;
  enddef;
  def map between diffusion_through_mitochondrial_membrane_parameters and ADPi for
    vars R_ADP and R_ADP;
    vars Li and Li;
  enddef;
  def map between diffusion_through_mitochondrial_membrane_parameters and AMPi for
    vars R_AMP and R_AMP;
    vars Li and Li;
  enddef;
  def map between diffusion_through_mitochondrial_membrane_parameters and PCri for
    vars R_PCr and R_PCr;
    vars Li and Li;
  enddef;
  def map between diffusion_through_mitochondrial_membrane_parameters and Cri for
    vars R_Cr and R_Cr;
    vars Li and Li;
  enddef;
  def map between diffusion_through_mitochondrial_membrane_parameters and Pii for
    vars R_Pi and R_Pi;
    vars Li and Li;
  enddef;
  def map between diffusion_through_mitochondrial_membrane_parameters and diffusion_through_mitochondrial_membrane for
    vars R_Pi and R_Pi;
    vars R_Cr and R_Cr;
    vars R_PCr and R_PCr;
    vars R_AMP and R_AMP;
    vars R_ADP and R_ADP;
    vars R_ATP and R_ATP;
  enddef;
  def map between diffusion_through_mitochondrial_membrane and AMP for
    vars AMP and AMP;
  enddef;
  def map between diffusion_through_mitochondrial_membrane and AMPi for
    vars AMPi and AMPi;
  enddef;
  def map between diffusion_through_mitochondrial_membrane and PCr for
    vars PCr and PCr;
  enddef;
  def map between diffusion_through_mitochondrial_membrane and PCri for
    vars PCri and PCri;
  enddef;
  def map between diffusion_through_mitochondrial_membrane and Cr for
    vars Cr and Cr;
  enddef;
  def map between diffusion_through_mitochondrial_membrane and Cri for
    vars Cri and Cri;
  enddef;
  def map between diffusion_through_mitochondrial_membrane and Pi for
    vars Pi and Pi;
  enddef;
  def map between diffusion_through_mitochondrial_membrane and Pii for
    vars Pii and Pii;
  enddef;
  def map between diffusion_through_mitochondrial_membrane and diffusion_constants for
    vars D_ATP and D_ATP;
    vars D_ADP and D_ADP;
    vars D_AMP and D_AMP;
    vars D_PCr and D_PCr;
    vars D_Cr and D_Cr;
    vars D_Pi and D_Pi;
  enddef;
  def map between ATPi and ATP for
    vars ATP and ATP;
  enddef;
  def map between ATPi and v_ANT for
    vars v_ANT and v_ANT;
  enddef;
  def map between ATPi and v_MiCK for
    vars v_MiCK and v_MiCK;
  enddef;
  def map between ATPi and v_AKmit for
    vars v_AKmit and v_AKmit;
  enddef;
  def map between ATPi and fractional_volumes for
    vars FVi and FVi;
  enddef;
  def map between ADPi and ADP for
    vars ADP and ADP;
  enddef;
  def map between ADPi and v_ANT for
    vars v_ANT and v_ANT;
  enddef;
  def map between ADPi and v_MiCK for
    vars v_MiCK and v_MiCK;
  enddef;
  def map between ADPi and v_AKmit for
    vars v_AKmit and v_AKmit;
  enddef;
  def map between ADPi and fractional_volumes for
    vars FVi and FVi;
  enddef;
  def map between AMPi and AMP for
    vars AMP and AMP;
  enddef;
  def map between AMPi and v_AKmit for
    vars v_AKmit and v_AKmit;
  enddef;
  def map between AMPi and fractional_volumes for
    vars FVi and FVi;
  enddef;
  def map between PCri and PCr for
    vars PCr and PCr;
  enddef;
  def map between PCri and v_AKmit for
    vars v_AKmit and v_AKmit;
  enddef;
  def map between PCri and fractional_volumes for
    vars FVi and FVi;
  enddef;
  def map between Cri and Cr for
    vars Cr and Cr;
  enddef;
  def map between Cri and fractional_volumes for
    vars FVi and FVi;
  enddef;
  def map between Cri and v_MiCK for
    vars v_MiCK and v_MiCK;
    vars Cri and Cri;
  enddef;
  def map between Pii and Pi for
    vars Pi and Pi;
  enddef;
  def map between Pii and fractional_volumes for
    vars FVi and FVi;
  enddef;
  def map between Pii and oxidative_phosphorylation for
    vars v_PI and v_PI;
    vars Pii and Pii;
  enddef;
  def map between v_MiCK and PCri for
    vars PCri and PCri;
  enddef;
  def map between v_MiCK and mATPg for
    vars mATPg and mATPg;
  enddef;
  def map between v_MiCK and mATPi for
    vars mATPi and mATPi;
  enddef;
  def map between v_MiCK and mADPg for
    vars mADPg and mADPg;
  enddef;
  def map between v_MiCK and mADPi for
    vars mADPi and mADPi;
  enddef;
  def map between v_exch and ATPi for
    vars ATPi and ATPi;
  enddef;
  def map between v_exch and Mg_buffering for
    vars ATPg and ATPg;
    vars ADPg and ADPg;
  enddef;
  def map between v_exch and ADPi for
    vars ADPi and ADPi;
  enddef;
  def map between oxidative_phosphorylation and delta_p for
    vars delta_p and delta_p;
  enddef;
  def map between oxidative_phosphorylation and delta_Gsn for
    vars delta_Gsn and delta_Gsn;
  enddef;
  def map between oxidative_phosphorylation and Z for
    vars Z and Z;
  enddef;
  def map between oxidative_phosphorylation and redox_potentials for
    vars Ea and Ea;
    vars Eu and Eu;
    vars Ec and Ec;
    vars En and En;
  enddef;
  def map between oxidative_phosphorylation and NADH for
    vars NADH and NADH;
  enddef;
  def map between oxidative_phosphorylation and NAD for
    vars NAD and NAD;
    vars v_C1 and v_C1;
    vars v_dh and v_dh;
  enddef;
  def map between oxidative_phosphorylation and c2plus for
    vars c2plus and c2plus;
  enddef;
  def map between oxidative_phosphorylation and a2plus for
    vars a2plus and a2plus;
  enddef;
  def map between oxidative_phosphorylation and Hext for
    vars Hext and Hext;
  enddef;
  def map between oxidative_phosphorylation and pHx for
    vars pHx and pHx;
  enddef;
  def map between oxidative_phosphorylation and H_buffering for
    vars pHext and pHext;
  enddef;
  def map between oxidative_phosphorylation and general_constants for
    vars u and u;
  enddef;
  def map between UQ and fractional_volumes for
    vars FVx and FVx;
  enddef;
  def map between UQ and oxidative_phosphorylation for
    vars v_C1 and v_C1;
    vars v_C3 and v_C3;
  enddef;
  def map between c3plus and fractional_volumes for
    vars FVx and FVx;
  enddef;
  def map between c3plus and oxidative_phosphorylation for
    vars v_O2 and v_O2;
    vars v_C3 and v_C3;
  enddef;
  def map between Hx and fractional_volumes for
    vars FVx and FVx;
  enddef;
  def map between Hx and general_constants for
    vars u and u;
    vars na and na;
  enddef;
  def map between Hx and oxidative_phosphorylation for
    vars v_O2 and v_O2;
    vars v_C1 and v_C1;
    vars v_C3 and v_C3;
    vars v_PI and v_PI;
    vars v_sn and v_sn;
    vars v_leak and v_leak;
    vars Hx and Hx;
  enddef;
  def map between Hx and v_ANT for
    vars v_ANT and v_ANT;
  enddef;
  def map between Hx and r_buff for
    vars r_buff and r_buff;
    vars delta_Hx and delta_Hx;
  enddef;
  def map between NAD and fractional_volumes for
    vars FVx and FVx;
  enddef;
  def map between ATPx and fractional_volumes for
    vars FVx and FVx;
  enddef;
  def map between ATPx and oxidative_phosphorylation for
    vars v_sn and v_sn;
  enddef;
  def map between ATPx and v_ANT for
    vars v_ANT and v_ANT;
  enddef;
  def map between Pix and fractional_volumes for
    vars FVx and FVx;
  enddef;
  def map between Pix and oxidative_phosphorylation for
    vars v_PI and v_PI;
    vars Pix and Pix;
    vars v_sn and v_sn;
  enddef;
  def map between NADH and NAD for
    vars NAD and NAD;
  enddef;
  def map between UQH2 and UQ for
    vars UQ and UQ;
  enddef;
  def map between c2plus and c3plus for
    vars c3plus and c3plus;
  enddef;
  def map between a2plus and redox_potentials for
    vars a3_2 and a3_2;
  enddef;
  def map between ADPx and ATPx for
    vars ATPx and ATPx;
  enddef;
  def map between pHx and Hx for
    vars Hx and Hx;
  enddef;
  def map between pHx and general_constants for
    vars eta and eta;
  enddef;
  def map between delta_pH and H_buffering for
    vars pHext and pHext;
  enddef;
  def map between delta_pH and pHx for
    vars pHx and pHx;
  enddef;
  def map between delta_pH and Z for
    vars Z and Z;
  enddef;
  def map between delta_p and delta_pH for
    vars delta_pH and delta_pH;
  enddef;
  def map between delta_p and general_constants for
    vars u and u;
  enddef;
  def map between delta_psi and delta_p for
    vars delta_p and delta_p;
  enddef;
  def map between delta_psi and delta_pH for
    vars delta_pH and delta_pH;
  enddef;
  def map between Hext and general_constants for
    vars eta and eta;
  enddef;
  def map between Hext and H_buffering for
    vars pHext and pHext;
  enddef;
  def map between r_buff and general_constants for
    vars eta and eta;
  enddef;
  def map between r_buff and pHx for
    vars pHx and pHx;
  enddef;
  def map between r_buff and delta_pH for
    vars delta_pH and delta_pH;
  enddef;
  def map between Z and general_constants for
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between v_ANT and fADPg for
    vars fADPg and fADPg;
  enddef;
  def map between v_ANT and fATPg for
    vars fATPg and fATPg;
  enddef;
  def map between v_ANT and fADPi for
    vars fADPi and fADPi;
  enddef;
  def map between v_ANT and fADPx for
    vars fADPx and fADPx;
  enddef;
  def map between v_ANT and fATPx for
    vars fATPx and fATPx;
  enddef;
  def map between v_ANT and fATPi for
    vars fATPi and fATPi;
  enddef;
  def map between v_ANT and delta_psi for
    vars delta_psi and delta_psi;
  enddef;
  def map between v_ANT and Z for
    vars Z and Z;
  enddef;
  def map between delta_Gsn and delta_p for
    vars delta_p and delta_p;
  enddef;
  def map between delta_Gsn and Z for
    vars Z and Z;
  enddef;
  def map between delta_Gsn and general_constants for
    vars eta and eta;
    vars F and F;
    vars na and na;
  enddef;
  def map between delta_Gsn and ATPx for
    vars ATPx and ATPx;
  enddef;
  def map between delta_Gsn and ADPx for
    vars ADPx and ADPx;
  enddef;
  def map between delta_Gsn and Pix for
    vars Pix and Pix;
  enddef;
  def map between redox_potentials and NAD for
    vars NAD and NAD;
  enddef;
  def map between redox_potentials and NADH for
    vars NADH and NADH;
  enddef;
  def map between redox_potentials and UQ for
    vars UQ and UQ;
  enddef;
  def map between redox_potentials and UQH2 for
    vars UQH2 and UQH2;
  enddef;
  def map between redox_potentials and c3plus for
    vars c3plus and c3plus;
  enddef;
  def map between redox_potentials and c2plus for
    vars c2plus and c2plus;
  enddef;
  def map between redox_potentials and Z for
    vars Z and Z;
  enddef;
  def map between redox_potentials and delta_p for
    vars delta_p and delta_p;
  enddef;
  def map between redox_potentials and general_constants for
    vars u and u;
  enddef;
  def map between environment and ATP for
    vars time and time;
  enddef;
  def map between environment and ADP for
    vars time and time;
  enddef;
  def map between environment and AMP for
    vars time and time;
  enddef;
  def map between environment and PCr for
    vars time and time;
  enddef;
  def map between environment and Cr for
    vars time and time;
  enddef;
  def map between environment and Pi for
    vars time and time;
  enddef;
  def map between environment and H_ATP for
    vars time and time;
  enddef;
  def map between environment and ATPi for
    vars time and time;
  enddef;
  def map between environment and ADPi for
    vars time and time;
  enddef;
  def map between environment and AMPi for
    vars time and time;
  enddef;
  def map between environment and PCri for
    vars time and time;
  enddef;
  def map between environment and Cri for
    vars time and time;
  enddef;
  def map between environment and Pii for
    vars time and time;
  enddef;
  def map between environment and UQ for
    vars time and time;
  enddef;
  def map between environment and c3plus for
    vars time and time;
  enddef;
  def map between environment and NAD for
    vars time and time;
  enddef;
  def map between environment and Hx for
    vars time and time;
  enddef;
  def map between environment and ATPx for
    vars time and time;
  enddef;
  def map between environment and Pix for
    vars time and time;
  enddef;
  def map between fATPi and ATPi for
    vars ATPi and ATPi;
  enddef;
  def map between fATPi and Mg_buffering for
    vars Mgi and Mgi;
  enddef;
  def map between mATPi and fATPi for
    vars fATPi and fATPi;
  enddef;
  def map between mATPi and ATPi for
    vars ATPi and ATPi;
  enddef;
  def map between fATPg and Mg_buffering for
    vars ATPg and ATPg;
    vars Mgg and Mgg;
  enddef;
  def map between mATPg and fATPg for
    vars fATPg and fATPg;
  enddef;
  def map between mATPg and Mg_buffering for
    vars ATPg and ATPg;
  enddef;
  def map between fATPext and Mg_buffering for
    vars Mgext and Mgext;
    vars ATPext and ATPext;
  enddef;
  def map between mATPext and fATPext for
    vars fATPext and fATPext;
  enddef;
  def map between mATPext and Mg_buffering for
    vars ATPext and ATPext;
  enddef;
  def map between fATPx and ATPx for
    vars ATPx and ATPx;
  enddef;
  def map between fATPx and Mg_buffering for
    vars Mgx and Mgx;
  enddef;
  def map between mATPx and fATPx for
    vars fATPx and fATPx;
  enddef;
  def map between mATPx and ATPx for
    vars ATPx and ATPx;
  enddef;
  def map between fADPi and ADPi for
    vars ADPi and ADPi;
  enddef;
  def map between fADPi and Mg_buffering for
    vars Mgi and Mgi;
  enddef;
  def map between mADPi and fADPi for
    vars fADPi and fADPi;
  enddef;
  def map between mADPi and ADPi for
    vars ADPi and ADPi;
  enddef;
  def map between fADPg and Mg_buffering for
    vars ADPg and ADPg;
    vars Mgg and Mgg;
  enddef;
  def map between mADPg and fADPg for
    vars fADPg and fADPg;
  enddef;
  def map between mADPg and Mg_buffering for
    vars ADPg and ADPg;
  enddef;
  def map between fADPext and Mg_buffering for
    vars Mgext and Mgext;
    vars ADPext and ADPext;
  enddef;
  def map between mADPext and fADPext for
    vars fADPext and fADPext;
  enddef;
  def map between mADPext and Mg_buffering for
    vars ADPext and ADPext;
  enddef;
  def map between fADPx and ADPx for
    vars ADPx and ADPx;
  enddef;
  def map between fADPx and Mg_buffering for
    vars Mgx and Mgx;
  enddef;
  def map between mADPx and fADPx for
    vars fADPx and fADPx;
  enddef;
  def map between mADPx and ADPx for
    vars ADPx and ADPx;
  enddef;
enddef;
