<?xml version='1.0' encoding='utf-8'?>
<!--
This CellML file was generated on 22/07/2008 at 9:33:23 at a.m. using:

COR (0.9.31.979)
Copyright 2002-2008 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xmlns:ns7="http://www.cellml.org/metadata/simulation/1.0#" cmeta:id="wang_lin_lin_wu_2007" name="wang_lin_lin_wu_2007">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Effect of riluzole on action potential in cultured human skeletal muscle cells</title>
				<author>
					<firstname>Geoffrey</firstname>
					<surname>Nunns</surname>
					<affiliation>
						<shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This model runs in both PCEnv and COR. It does not recreate the published results, because the published paper had an incorrect equation for I_Ca, which is corrected in this model after consultation with the model authors. In this model, I_Ca has the term (V_m - E_Ca) included to correct the model.   
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
Abstract: Riluzole is known to be of therapeutic use in the management of amyotrophic lateral sclerosis. In this study, we investigated the effects of riluzole on ion currents in cultured differentiated human skeletal muscle cells (dHSkMCs). Western blotting revealed the protein expression of greek small letter alpha-subunits for both large-conductance Ca2+-activated K+ (BKCa) channel and Na+ channel (Nav1.5) in these cells. Riluzole could reduce the frequency of spontaneous beating in dHSkMCs. In whole-cell configuration, riluzole suppressed voltage-gated Na+ current (INa) in a concentration-dependent manner with an IC50 value of 2.3 uM. Riluzole (10 uM) also effectively increased Ca2+-activated K+ current (IK(Ca)) which could be reversed by iberiotoxin (200 nM) and paxilline (1 uM), but not by apamin (200 nM). In inside-out patches, when applied to the inside of the cell membrane, riluzole (10 uM) increased BKCa-channel activity with a decrease in mean closed time. Simulation studies also unraveled that both decreased conductance of INa and increased conductance of IK(Ca) utilized to mimic riluzole actions in skeletal muscle cells could combine to decrease the amplitude of action potentials and increase the repolarization of action potentials. Taken together, inhibition of INa and stimulation of BKCa-channel activity caused by this drug are partly, if not entirely, responsible for its muscle relaxant actions in clinical setting. 
</para>
				<para>
The complete original paper reference is cited below:
</para>
				<para>
Effect of riluzole on action potential in cultured human skeletal muscle cells, Ya-Jean Wang, Ming-Wei Lin, An-An Lin, Sheng-Nan Wu, 2007, <emphasis>Life Sciences</emphasis>, 82, 11-20. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=18068197 &amp;dopt=Abstract">PubMed ID: 18068197 </ulink>
				</para>
				
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>model diagram</title>
							</objectinfo>
							<imagedata fileref="wang_2008.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of Wang et al. cell model.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	   <units name="kilocoulombs_per_mole">
      <unit units="coulomb" prefix="kilo"/>
      <unit units="mole" exponent="-1"/>
   </units>
   <units name="millisecond">
      <unit units="second" prefix="milli"/>
   </units>
   <units name="millivolt">
      <unit units="volt" prefix="milli"/>
   </units>
   <units name="picofarad">
      <unit units="farad" prefix="pico"/>
   </units>
   <units name="picoampere">
      <unit units="ampere" prefix="pico"/>
   </units>
   <units name="per_picoampere_per_millisecond">
      <unit units="picoampere" exponent="-1"/>
      <unit units="millisecond" exponent="-1"/>
   </units>
   <units name="nanosiemens">
      <unit units="siemens" prefix="nano"/>
   </units>
   <units name="per_nanosiemens">
      <unit units="nanosiemens" exponent="-1"/>
   </units>
   <units name="per_millisecond">
      <unit units="second" prefix="milli" exponent="-1"/>
   </units>
   <units name="per_millivolt">
      <unit units="millivolt" exponent="-1"/>
   </units>
   <units name="per_millivolt_per_millisecond">
      <unit units="per_millisecond"/>
      <unit units="per_millivolt"/>
   </units>
   <units name="joule_per_mole">
      <unit units="joule"/>
      <unit units="mole" exponent="-1"/>
   </units>
   <units name="kilojoule_per_mole">
      <unit units="joule" prefix="kilo"/>
      <unit units="mole" exponent="-1"/>
   </units>
   <units name="nanosiemens_per_millivolt">
      <unit units="nanosiemens"/>
      <unit units="millivolt" exponent="-1"/>
   </units>
   <component name="environment">
      <variable units="millisecond" public_interface="out" name="time"/>
   </component>
   <component name="parameters">
      <variable units="joule_per_mole" public_interface="out" name="RT" initial_value="2577"/>
   </component>
   <component name="membrane">
      <variable units="millivolt" public_interface="out" name="V_m" initial_value="-75"/>
      <variable units="picofarad" name="C_m" initial_value="0.009"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="picoampere" public_interface="in" name="I_Na"/>
      <variable units="picoampere" public_interface="in" name="I_T"/>
      <variable units="picoampere" public_interface="in" name="I_KCa"/>
      <variable units="picoampere" public_interface="in" name="I_Ca"/>
      <variable units="picoampere" public_interface="in" name="I_L"/>
      <variable units="picoampere" public_interface="in" name="I_K"/>
      <variable units="picoampere" public_interface="in" name="I_stim"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V_m</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>I_stim</ci>
                  <apply>
                     <plus/>
                     <ci>I_Na</ci>
                     <ci>I_Ca</ci>
                     <ci>I_K</ci>
                     <ci>I_L</ci>
                     <ci>I_T</ci>
                     <ci>I_KCa</ci>
                  </apply>
               </apply>
               <ci>C_m</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="I_stim">
      <variable units="picoampere" public_interface="out" name="I_stim"/>
      <variable units="picoampere" name="I_mag" initial_value="2"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="millisecond" name="t_0" initial_value="5"/>
      <variable units="millisecond" name="t_1" initial_value="6"/>
      <variable units="dimensionless" name="H_0"/>
      <variable units="dimensionless" name="H_1"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>H_0</ci>
            <piecewise>
               <piece>
                  <cn cellml:units="dimensionless">0</cn>
                  <apply>
                     <lt/>
                     <ci>time</ci>
                     <ci>t_0</ci>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="dimensionless">1</cn>
               </otherwise>
            </piecewise>
         </apply>
         <apply>
            <eq/>
            <ci>H_1</ci>
            <piecewise>
               <piece>
                  <cn cellml:units="dimensionless">0</cn>
                  <apply>
                     <lt/>
                     <ci>time</ci>
                     <ci>t_1</ci>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="dimensionless">1</cn>
               </otherwise>
            </piecewise>
         </apply>
         <apply>
            <eq/>
            <ci>I_stim</ci>
            <apply>
               <times/>
               <ci>I_mag</ci>
               <apply>
                  <minus/>
                  <ci>H_0</ci>
                  <ci>H_1</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="I_Na">
      <variable units="picoampere" public_interface="out" name="I_Na"/>
      <variable units="nanosiemens" name="g_Na" initial_value="0.45"/>
      <variable units="millivolt" name="E_Na" initial_value="50"/>
      <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
      <variable units="millivolt" public_interface="in" private_interface="out" name="V_m"/>
      <variable units="dimensionless" private_interface="in" name="m"/>
      <variable units="dimensionless" private_interface="in" name="h"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>I_Na</ci>
            <apply>
               <times/>
               <ci>g_Na</ci>
               <apply>
                  <power/>
                  <ci>m</ci>
                  <cn cellml:units="dimensionless">3</cn>
               </apply>
               <ci>h</ci>
               <apply>
                  <minus/>
                  <ci>V_m</ci>
                  <ci>E_Na</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="m">
      <variable units="dimensionless" public_interface="out" name="m" initial_value="0"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="millivolt" public_interface="in" name="V_m"/>
      <variable units="millivolt" name="E_m" initial_value="-42"/>
      <variable units="millivolt" name="V_alpha_m" initial_value="10"/>
      <variable units="millivolt" name="V_beta_m" initial_value="18"/>
      <variable units="per_millisecond" name="alpha_m"/>
      <variable units="per_millisecond" name="beta_m"/>
      <variable units="per_millivolt_per_millisecond" name="alpha_m_max" initial_value="0.208"/>
      <variable units="per_millisecond" name="beta_m_max" initial_value="2.081"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_m</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>alpha_m_max</ci>
                  <apply>
                     <minus/>
                     <ci>V_m</ci>
                     <ci>E_m</ci>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <ci>E_m</ci>
                           <ci>V_m</ci>
                        </apply>
                        <ci>V_alpha_m</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_m</ci>
            <apply>
               <times/>
               <ci>beta_m_max</ci>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <minus/>
                        <ci>E_m</ci>
                        <ci>V_m</ci>
                     </apply>
                     <ci>V_beta_m</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_m</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>m</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_m</ci>
                  <ci>m</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="h">
      <variable units="dimensionless" public_interface="out" name="h" initial_value="1"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="millivolt" public_interface="in" name="V_m"/>
      <variable units="millivolt" name="E_h" initial_value="-41"/>
      <variable units="millivolt" name="V_alpha_h" initial_value="14.7"/>
      <variable units="millivolt" name="V_beta_h" initial_value="7.6"/>
      <variable units="per_millisecond" name="alpha_h"/>
      <variable units="per_millisecond" name="beta_h"/>
      <variable units="per_millisecond" name="alpha_h_max" initial_value="0.0156"/>
      <variable units="per_millisecond" name="beta_h_max" initial_value="3.382"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_h</ci>
            <apply>
               <times/>
               <ci>alpha_h_max</ci>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <minus/>
                        <ci>V_m</ci>
                        <ci>E_h</ci>
                     </apply>
                     <ci>V_alpha_h</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_h</ci>
            <apply>
               <divide/>
               <ci>beta_h_max</ci>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <ci>E_h</ci>
                           <ci>V_m</ci>
                        </apply>
                        <ci>V_beta_h</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>h</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_h</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>h</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_h</ci>
                  <ci>h</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="I_T">
      <variable units="picoampere" public_interface="out" name="I_T"/>
      <variable units="per_nanosiemens" private_interface="out" name="R_s" initial_value="15"/>
      <variable units="picofarad" private_interface="out" name="C_t" initial_value="0.04"/>
      <variable units="millivolt" public_interface="in" private_interface="out" name="V_m"/>
      <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
      <variable units="millivolt" private_interface="in" name="V_T"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>I_T</ci>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>V_m</ci>
                  <ci>V_T</ci>
               </apply>
               <ci>R_s</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="V_T">
      <variable units="millivolt" public_interface="out" name="V_T" initial_value="-70"/>
      <variable units="per_nanosiemens" public_interface="in" name="R_s"/>
      <variable units="picofarad" public_interface="in" name="C_t"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="millivolt" public_interface="in" name="V_m"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V_T</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>V_m</ci>
                  <ci>V_T</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>R_s</ci>
                  <ci>C_t</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="I_KCa">
      <variable units="picoampere" public_interface="out" name="I_KCa"/>
      <variable units="nanosiemens" name="g_KCa" initial_value="0.5"/>
      <variable units="millivolt" public_interface="in" name="E_K"/>
      <variable units="dimensionless" private_interface="in" name="o"/>
      <variable units="dimensionless" private_interface="in" name="w"/>
      <variable units="millivolt" public_interface="in" private_interface="out" name="V_m"/>
      <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
      <variable units="dimensionless" public_interface="in" private_interface="out" name="c"/>
      <variable units="joule_per_mole" public_interface="in" private_interface="out" name="RT"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>I_KCa</ci>
            <apply>
               <times/>
               <ci>g_KCa</ci>
               <ci>o</ci>
               <ci>w</ci>
               <apply>
                  <minus/>
                  <ci>V_m</ci>
                  <ci>E_K</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="o">
      <variable units="dimensionless" public_interface="out" name="o" initial_value="0.15"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="millivolt" public_interface="in" name="V_m"/>
      <variable units="dimensionless" public_interface="in" name="c"/>
      <variable units="dimensionless" name="o_oinf"/>
      <variable units="per_millisecond" name="alpha_Vm"/>
      <variable units="per_millisecond" name="beta_Vm"/>
      <variable units="millisecond" name="tau_Vm"/>
      <variable units="dimensionless" name="d_1" initial_value="0.84"/>
      <variable units="dimensionless" name="d_2" initial_value="1"/>
      <variable units="dimensionless" name="k_1" initial_value="0.18"/>
      <variable units="dimensionless" name="k_2" initial_value="0.011"/>
      <variable units="per_millisecond" name="a_bar" initial_value="0.48"/>
      <variable units="per_millisecond" name="b_bar" initial_value="0.28"/>
      <variable units="joule_per_mole" public_interface="in" name="RT"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_Vm</ci>
            <apply>
               <divide/>
               <ci>a_bar</ci>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <times/>
                     <ci>k_1</ci>
                     <apply>
                        <exp/>
                        <apply>
                           <divide/>
                           <apply>
                              <times/>
                              <apply>
                                 <minus/>
                                 <cn cellml:units="dimensionless">2</cn>
                              </apply>
                              <ci>d_1</ci>
                              <cn cellml:units="kilocoulombs_per_mole">96.485</cn>
                              <ci>V_m</ci>
                           </apply>
                           <apply>
                              <times/>
                              <ci>RT</ci>
                              <ci>c</ci>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_Vm</ci>
            <apply>
               <divide/>
               <ci>b_bar</ci>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <divide/>
                     <ci>c</ci>
                     <apply>
                        <times/>
                        <ci>k_2</ci>
                        <apply>
                           <exp/>
                           <apply>
                              <divide/>
                              <apply>
                                 <times/>
                                 <apply>
                                    <minus/>
                                    <cn cellml:units="dimensionless">2</cn>
                                 </apply>
                                 <ci>d_2</ci>
                                 <cn cellml:units="kilocoulombs_per_mole">96.485</cn>
                                 <ci>V_m</ci>
                              </apply>
                              <ci>RT</ci>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>tau_Vm</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <ci>alpha_Vm</ci>
                  <ci>beta_Vm</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>o_oinf</ci>
            <apply>
               <times/>
               <ci>alpha_Vm</ci>
               <ci>tau_Vm</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>o</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>o_oinf</ci>
                  <ci>o</ci>
               </apply>
               <ci>tau_Vm</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="w">
      <variable units="dimensionless" public_interface="out" name="w"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="dimensionless" name="kd" initial_value="0.18"/>
      <variable units="dimensionless" public_interface="in" name="c"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>w</ci>
            <apply>
               <divide/>
               <apply>
                  <power/>
                  <ci>c</ci>
                  <cn cellml:units="dimensionless">5</cn>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <power/>
                     <ci>c</ci>
                     <cn cellml:units="dimensionless">5</cn>
                  </apply>
                  <apply>
                     <power/>
                     <ci>kd</ci>
                     <cn cellml:units="dimensionless">5</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="calcium_handling">
      <variable units="dimensionless" public_interface="out" name="c" initial_value="0.15"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="dimensionless" public_interface="out" name="cer" initial_value="200"/>
      <variable units="picoampere" name="j_mem"/>
      <variable units="picoampere" name="j_leak"/>
      <variable units="picoampere" name="j_serca"/>
      <variable units="picoampere" name="j_er"/>
      <variable units="dimensionless" name="alpha" initial_value="4.5e-6"/>
      <variable units="dimensionless" name="k_pmca" initial_value="0.2"/>
      <variable units="picoampere" name="k_serca" initial_value="0.4"/>
      <variable units="picoampere" name="p_leak" initial_value="0.0005"/>
      <variable units="per_picoampere_per_millisecond" name="f_er" initial_value="0.01"/>
      <variable units="per_picoampere_per_millisecond" name="f_cyt" initial_value="0.01"/>
      <variable units="dimensionless" name="v_cytver" initial_value="5"/>
      <variable units="picoampere" public_interface="in" name="I_Ca"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>j_mem</ci>
            <apply>
               <times/>
               <apply>
                  <minus/>
                  <ci>alpha</ci>
               </apply>
               <ci>I_Ca</ci>
               <ci>k_pmca</ci>
               <ci>c</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>j_leak</ci>
            <apply>
               <times/>
               <ci>p_leak</ci>
               <apply>
                  <minus/>
                  <ci>cer</ci>
                  <ci>c</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>j_serca</ci>
            <apply>
               <times/>
               <ci>k_serca</ci>
               <ci>c</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>j_er</ci>
            <apply>
               <minus/>
               <ci>j_leak</ci>
               <ci>j_serca</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>c</ci>
            </apply>
            <apply>
               <times/>
               <ci>f_cyt</ci>
               <apply>
                  <plus/>
                  <ci>j_mem</ci>
                  <ci>j_er</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>cer</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <minus/>
                  <ci>f_er</ci>
               </apply>
               <ci>v_cytver</ci>
               <ci>j_er</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="I_Ca">
      <variable units="picoampere" public_interface="out" name="I_Ca"/>
      <variable units="millivolt" public_interface="in" private_interface="out" name="V_m"/>
      <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
      <variable units="dimensionless" private_interface="in" name="d"/>
      <variable units="nanosiemens" name="g_Ca"/>
      <variable units="nanosiemens_per_millivolt" name="g_Ca0" initial_value="0.05"/>
      <variable units="millivolt" name="E_Ca" initial_value="50"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>g_Ca</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <ci>g_Ca0</ci>
                  </apply>
                  <ci>V_m</ci>
               </apply>
               <apply>
                  <minus/>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <cn cellml:units="per_millivolt">0.117</cn>
                        <ci>V_m</ci>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>I_Ca</ci>
            <apply>
               <times/>
               <ci>g_Ca</ci>
               <apply>
                  <power/>
                  <ci>d</ci>
                  <cn cellml:units="dimensionless">2</cn>
               </apply>
               <apply>
                  <minus/>
                  <ci>V_m</ci>
                  <ci>E_Ca</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="d">
      <variable units="dimensionless" public_interface="out" name="d" initial_value="0"/>
      <variable units="millivolt" public_interface="in" name="V_m"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="per_millisecond" name="alpha_d"/>
      <variable units="per_millisecond" name="beta_d"/>
      <variable units="millisecond" name="tau_d"/>
      <variable units="dimensionless" name="d_infinity"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>d_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <cn cellml:units="millivolt">24.6</cn>
                           </apply>
                           <ci>V_m</ci>
                        </apply>
                        <cn cellml:units="millivolt">11.3</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>tau_d</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="millisecond">80</cn>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
               <apply>
                  <cosh/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <cn cellml:units="per_millivolt">0.031</cn>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>V_m</ci>
                        <cn cellml:units="millivolt">37.1</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>alpha_d</ci>
            <apply>
               <divide/>
               <ci>d_infinity</ci>
               <ci>tau_d</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_d</ci>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <ci>d_infinity</ci>
               </apply>
               <ci>tau_d</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>d</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_d</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>d</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_d</ci>
                  <ci>d</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="I_L">
      <variable units="picoampere" public_interface="out" name="I_L"/>
      <variable units="millivolt" public_interface="in" name="V_m"/>
      <variable units="millivolt" name="E_L" initial_value="-75"/>
      <variable units="nanosiemens" name="g_Lmax" initial_value="0.0024"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>I_L</ci>
            <apply>
               <times/>
               <ci>g_Lmax</ci>
               <apply>
                  <minus/>
                  <ci>V_m</ci>
                  <ci>E_L</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="I_K">
      <variable units="picoampere" public_interface="out" name="I_K"/>
      <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
      <variable units="millivolt" public_interface="in" private_interface="out" name="V_m"/>
      <variable units="dimensionless" private_interface="in" name="n"/>
      <variable units="millivolt" public_interface="out" name="E_K" initial_value="-70"/>
      <variable units="nanosiemens" name="g_K" initial_value="0.415"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>I_K</ci>
            <apply>
               <times/>
               <ci>g_K</ci>
               <apply>
                  <power/>
                  <ci>n</ci>
                  <cn cellml:units="dimensionless">4</cn>
               </apply>
               <apply>
                  <minus/>
                  <ci>V_m</ci>
                  <ci>E_K</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="n">
      <variable units="dimensionless" public_interface="out" name="n" initial_value="0"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="millivolt" public_interface="in" name="V_m"/>
      <variable units="millivolt" name="E_n" initial_value="-40"/>
      <variable units="millivolt" name="V_alpha_n" initial_value="7"/>
      <variable units="millivolt" name="V_beta_n" initial_value="40"/>
      <variable units="per_millisecond" name="alpha_n"/>
      <variable units="per_millisecond" name="beta_n"/>
      <variable units="per_millivolt_per_millisecond" name="alpha_n_max" initial_value="0.0229"/>
      <variable units="per_millisecond" name="beta_n_max" initial_value="0.09616"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_n</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>alpha_n_max</ci>
                  <apply>
                     <minus/>
                     <ci>V_m</ci>
                     <ci>E_n</ci>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <ci>E_n</ci>
                           <ci>V_m</ci>
                        </apply>
                        <ci>V_alpha_n</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_n</ci>
            <apply>
               <times/>
               <ci>beta_n_max</ci>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <minus/>
                        <ci>E_n</ci>
                        <ci>V_m</ci>
                     </apply>
                     <ci>V_beta_n</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>n</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_n</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>n</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_n</ci>
                  <ci>n</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <group>
      <relationship_ref relationship="encapsulation"/>
      <component_ref component="I_Na">
         <component_ref component="m"/>
         <component_ref component="h"/>
      </component_ref>
      <component_ref component="I_T">
         <component_ref component="V_T"/>
      </component_ref>
      <component_ref component="I_K">
         <component_ref component="n"/>
      </component_ref>
      <component_ref component="I_Ca">
         <component_ref component="d"/>
      </component_ref>
      <component_ref component="I_KCa">
         <component_ref component="o"/>
         <component_ref component="w"/>
      </component_ref>
   </group>
   <connection>
      <map_components component_2="environment" component_1="I_stim"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="I_KCa"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="membrane"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="calcium_handling"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="I_Na" component_1="environment"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="I_K" component_1="environment"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="I_T" component_1="environment"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="I_Ca" component_1="environment"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="I_Na" component_1="membrane"/>
      <map_variables variable_2="V_m" variable_1="V_m"/>
      <map_variables variable_2="I_Na" variable_1="I_Na"/>
   </connection>
   <connection>
      <map_components component_2="I_T" component_1="membrane"/>
      <map_variables variable_2="V_m" variable_1="V_m"/>
      <map_variables variable_2="I_T" variable_1="I_T"/>
   </connection>
   <connection>
      <map_components component_2="I_KCa" component_1="membrane"/>
      <map_variables variable_2="V_m" variable_1="V_m"/>
      <map_variables variable_2="I_KCa" variable_1="I_KCa"/>
   </connection>
   <connection>
      <map_components component_2="I_Ca" component_1="membrane"/>
      <map_variables variable_2="V_m" variable_1="V_m"/>
      <map_variables variable_2="I_Ca" variable_1="I_Ca"/>
   </connection>
   <connection>
      <map_components component_2="I_L" component_1="membrane"/>
      <map_variables variable_2="V_m" variable_1="V_m"/>
      <map_variables variable_2="I_L" variable_1="I_L"/>
   </connection>
   <connection>
      <map_components component_2="I_K" component_1="membrane"/>
      <map_variables variable_2="V_m" variable_1="V_m"/>
      <map_variables variable_2="I_K" variable_1="I_K"/>
   </connection>
   <connection>
      <map_components component_2="m" component_1="I_Na"/>
      <map_variables variable_2="V_m" variable_1="V_m"/>
      <map_variables variable_2="m" variable_1="m"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="h" component_1="I_Na"/>
      <map_variables variable_2="V_m" variable_1="V_m"/>
      <map_variables variable_2="h" variable_1="h"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="n" component_1="I_K"/>
      <map_variables variable_2="V_m" variable_1="V_m"/>
      <map_variables variable_2="n" variable_1="n"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="V_T" component_1="I_T"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V_m" variable_1="V_m"/>
      <map_variables variable_2="V_T" variable_1="V_T"/>
      <map_variables variable_2="R_s" variable_1="R_s"/>
      <map_variables variable_2="C_t" variable_1="C_t"/>
   </connection>
   <connection>
      <map_components component_2="I_KCa" component_1="I_K"/>
      <map_variables variable_2="E_K" variable_1="E_K"/>
   </connection>
   <connection>
      <map_components component_2="d" component_1="I_Ca"/>
      <map_variables variable_2="d" variable_1="d"/>
      <map_variables variable_2="V_m" variable_1="V_m"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="I_stim" component_1="membrane"/>
      <map_variables variable_2="I_stim" variable_1="I_stim"/>
   </connection>
   <connection>
      <map_components component_2="parameters" component_1="I_KCa"/>
      <map_variables variable_2="RT" variable_1="RT"/>
   </connection>
   <connection>
      <map_components component_2="calcium_handling" component_1="I_KCa"/>
      <map_variables variable_2="c" variable_1="c"/>
   </connection>
   <connection>
      <map_components component_2="o" component_1="I_KCa"/>
      <map_variables variable_2="o" variable_1="o"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V_m" variable_1="V_m"/>
      <map_variables variable_2="c" variable_1="c"/>
      <map_variables variable_2="RT" variable_1="RT"/>
   </connection>
   <connection>
      <map_components component_2="w" component_1="I_KCa"/>
      <map_variables variable_2="w" variable_1="w"/>
      <map_variables variable_2="c" variable_1="c"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="I_Ca" component_1="calcium_handling"/>
      <map_variables variable_2="I_Ca" variable_1="I_Ca"/>
   </connection>
   
<rdf:RDF>
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  <rdf:Description rdf:about="rdf:#126f2a80-79ce-489b-8541-6b651151397d">
    <bqs:Pubmed_id>18068197</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#de781143-bc0b-40f1-b48a-c2d2d2f9ede6"/>
  </rdf:Description>
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  <rdf:Description rdf:about="rdf:#09224f96-cf00-4587-bbc7-5c077a6de0c8">
    <bqs:Pubmed_id>18068197 </bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#626aba8a-1a15-4f35-af68-3efa504521bb"/>
  </rdf:Description>
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  <rdf:Description rdf:about="rdf:#bcf5ccc7-12ab-4bb0-96a2-b1c9d6f4e666">
    <bqs:Pubmed_id>18068197</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#ab464d7a-5a93-495b-a5b1-f29bed388aba"/>
  </rdf:Description>
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</rdf:RDF>
</model>