<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  weinstein_1998_gastric_H_K_ATPase_model_version02.xml

CREATED :  25th May 2007

LAST MODIFIED : 25th May 2007

AUTHOR :  Catherine Lloyd
          The Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.

DESCRIPTION :  This file contains a CellML description of Alan Weinstein's 1998 mathematical model of the inner medullary collecting duct of the rat: acid/base transport.

CHANGES:  
  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:pathway_editor="http://www.physiome.com/pathway_editor/1.0#" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="weinstein_1998_gastric_H_K_ATPase_model" name="weinstein_1998_version02">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Acid/base Transport in the Inner Medullary Collecting Duct of the Rat</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>   
</articleinfo>
<section id="sec_status">
        <title>Model Status</title>
        <para>
            This CellML model variant describes the gastric H+/K+ ATPase.</para>
      </section>
      <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: A mathematical model of the inner medullary collecting duct (IMCD) of the rat has been developed that is suitable for simulating luminal buffer titration and ammonia secretion by this nephron segment. Luminal proton secretion has been assigned to an H-K-ATPase, which has been represented by adapting the kinetic model of the gastric enzyme by Brzezinski et al. (P. Brzezinski, B. G. Malmstrom, P. Lorentzon, and B. Wallmark. Biochim. Biophys. Acta 942: 215-219, 1988). In shifting to a 2 H+:1 ATP stoichiometry, the model enzyme can acidify the tubule lumen approximately 3 pH units below that of the cytosol, when luminal K+ is in abundance. Peritubular base exit is a combination of ammonia recycling and HCO3- flux (either via Cl-/HCO3- exchange or via a Cl- channel). Ammonia recycling involves NH4(+) uptake on the Na-K-ATPase followed by diffusive NH3 exit [S. M. Wall. Am. J. Physiol. 270 (Renal Physiol. 39): F432-F439, 1996]; model calculations suggest that this is the principal mode of base exit. By virtue of this mechanism, the model also suggests that realistic elevations in peritubular K+ concentration will compromise IMCD acid secretion. Although ammonia recycling is insensitive to carbonic anhydrase (CA) inhibition, the base exit linked to HCO3- flux provides a CA-sensitive component to acid secretion. In model simulations, it is observed that increased luminal NaCl entry increases ammonia cycling but decreases peritubular Cl-/HCO3- exchange (due to increased cell Cl-). This parallel system of peritubular base exit stabilizes acid secretion in the face of variable Na+ reabsorption.</para>

<para>
The complete original paper reference is cited below:
</para>

<para>
A mathematical model of the inner medullary collecting duct of the rat: acid/base transport, Alan M. Weinstein, 1998, 
            <emphasis>American Journal of Physiology</emphasis>, 274(5 Pt 2), F856-67. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=6496750&amp;dopt=Abstract">PubMed ID: 6496750</ulink> 
</para>

<informalfigure float="0" id="fig_pathway_rendering">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>pathway_rendering</title>
    </objectinfo>
    <imagedata fileref="weinstein_1998a.png"/>
  </imageobject>
</mediaobject>
<caption>Conventional rendering of the gastric H-K-ATPase model.  This model has a stoichiometry of two H<superscript>+</superscript> and two K<superscript>+</superscript> per ATP.  E<subscript>1</subscript> and E<subscript>2</subscript> are the cytosolic- and luminal-facing enzymes, respectively.</caption>
</informalfigure>

</sect1>
</article>
</documentation>


  
  
  
  <units name="millimolar">
    <unit units="mole" prefix="micro"/>
    <unit units="litre" exponent="-1"/>
  </units>

  <units name="first_order_rate_constant">
    <unit units="second" exponent="-1"/>
  </units>

  <units name="second_order_rate_constant">
    <unit units="millimolar" exponent="-1"/>
    <unit units="second" exponent="-1"/>
  </units>

  <component name="environment">
    <variable units="second" public_interface="out" name="time"/>
  </component>

  <component cmeta:id="K_E1" name="K_E1">
    <variable units="millimolar" public_interface="out" name="K_E1"/>
    
    <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k1_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k9"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k9_"/>
    <variable units="millimolar" public_interface="in" name="K_E2"/>
    <variable units="millimolar" public_interface="in" name="K_E1_ATP"/>
    <variable units="millimolar" public_interface="in" name="ATP"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> K_E1 </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/> 
            <apply>
              <times/>
              <ci> k9 </ci>
              <ci> K_E2 </ci>
            </apply>
            <apply>
              <times/>
              <ci> k1_ </ci>
              <ci> K_E1_ATP </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> k9_ </ci>
              <ci> K_E1 </ci> 
            </apply>
            <apply>
              <times/>  
              <ci> k1 </ci>
              <ci> ATP </ci>
              <ci> K_E1 </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>

  <component cmeta:id="K_E1_ATP" name="K_E1_ATP">
    <variable units="millimolar" public_interface="out" name="K_E1_ATP"/>
    
    <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k1_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k2"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k2_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k11"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k11_"/>
    <variable units="millimolar" public_interface="in" name="K_E2_ATP"/>
    <variable units="millimolar" public_interface="in" name="K_E1"/>
    <variable units="millimolar" public_interface="in" name="E1_ATP"/>
    <variable units="millimolar" public_interface="in" name="K"/>
    <variable units="millimolar" public_interface="in" name="ATP"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> K_E1_ATP </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/> 
            <apply>
              <times/>
              <ci> k1 </ci>
              <ci> ATP </ci>
              <ci> K_E1 </ci>
            </apply>
            <apply>
              <times/>
              <ci> k11 </ci>
              <ci> K_E2_ATP </ci>
            </apply>
            <apply>
              <times/>
              <ci> k2_ </ci>
              <ci> K </ci>
              <ci> E1_ATP </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> k11_ </ci>
              <ci> K_E1_ATP </ci> 
            </apply>
            <apply>
              <times/>  
              <ci> k1_ </ci>
              <ci> K_E1_ATP </ci>
            </apply>
            <apply>
              <times/>
              <ci> k2 </ci>
              <ci> K_E1_ATP </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>

  <component cmeta:id="E1_ATP" name="E1_ATP">
    <variable units="millimolar" public_interface="out" name="E1_ATP"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="k2"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k2_"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k3_"/>
    <variable units="millimolar" public_interface="in" name="H_E1_ATP"/>
    <variable units="millimolar" public_interface="in" name="K_E1_ATP"/>
    <variable units="millimolar" public_interface="in" name="K"/>
    <variable units="millimolar" public_interface="in" name="H"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> E1_ATP </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/> 
            <apply>
              <times/>
              <ci> k2 </ci>
              <ci> K_E1_ATP </ci>
            </apply>
            <apply>
              <times/>
              <ci> k3_ </ci>
              <ci> H_E1_ATP </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> k2_ </ci>
              <ci> K </ci>
              <ci> E1_ATP </ci> 
            </apply>
            <apply>
              <times/>  
              <ci> k3 </ci>
              <ci> H </ci>
              <ci> E1_ATP </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>

  <component cmeta:id="H_E1_ATP" name="H_E1_ATP">
    <variable units="millimolar" public_interface="out" name="H_E1_ATP"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="k4"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k4_"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k3_"/>
    <variable units="millimolar" public_interface="in" name="E1_ATP"/>
    <variable units="millimolar" public_interface="in" name="H_E1_P"/>
    <variable units="millimolar" public_interface="in" name="ADP"/>
    <variable units="millimolar" public_interface="in" name="H"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> H_E1_ATP </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/> 
            <apply>
              <times/>
              <ci> k3 </ci>
              <ci> H </ci>
              <ci> E1_ATP </ci>
            </apply>
            <apply>
              <times/>
              <ci> k4_ </ci>
              <ci> ADP </ci>
              <ci> H_E1_P </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> k3_ </ci>
              <ci> H_E1_ATP </ci> 
            </apply>
            <apply>
              <times/>  
              <ci> k4 </ci>
              <ci> H_E1_ATP </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>

  <component cmeta:id="H_E1_P" name="H_E1_P">
    <variable units="millimolar" public_interface="out" name="H_E1_P"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="k4"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k4_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k5"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k5_"/>
    <variable units="millimolar" public_interface="in" name="H_E2_P"/>
    <variable units="millimolar" public_interface="in" name="H_E1_ATP"/>
    <variable units="millimolar" public_interface="in" name="ADP"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> H_E1_P </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/> 
            <apply>
              <times/>
              <ci> k4 </ci>
              <ci> H_E1_ATP </ci>
            </apply>
            <apply>
              <times/>
              <ci> k5_ </ci>
              <ci> H_E2_P </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k4_ </ci>
              <ci> ADP </ci>
              <ci> H_E1_P </ci>
            </apply>
            <apply>
              <times/>  
              <ci> k5 </ci>
              <ci> H_E1_P </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>

  <component cmeta:id="H_E2_P" name="H_E2_P">
    <variable units="millimolar" public_interface="out" name="H_E2_P"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="k6"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k6_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k5"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k5_"/>
    <variable units="millimolar" public_interface="in" name="H_E1_P"/>
    <variable units="millimolar" public_interface="in" name="E2_P"/>
    <variable units="millimolar" public_interface="in" name="H"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> H_E2_P </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/> 
            <apply>
              <times/>
              <ci> k6_ </ci>
              <ci> H </ci>
              <ci> E2_P </ci>
            </apply>
            <apply>
              <times/>
              <ci> k5 </ci>
              <ci> H_E1_P </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k6 </ci>
              <ci> H_E2_P </ci>
            </apply>
            <apply>
              <times/>  
              <ci> k5_ </ci>
              <ci> H_E2_P </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>

  <component cmeta:id="E2_P" name="E2_P">
    <variable units="millimolar" public_interface="out" name="E2_P"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="k6"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k6_"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k7"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k7_"/>
    <variable units="millimolar" public_interface="in" name="H_E2_P"/>
    <variable units="millimolar" public_interface="in" name="K_E2_P"/>
    <variable units="millimolar" public_interface="in" name="H"/>
    <variable units="millimolar" public_interface="in" name="K"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> E2_P </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/> 
            <apply>
              <times/>
              <ci> k7_ </ci>
              <ci> K_E2_P </ci>
            </apply>
            <apply>
              <times/>
              <ci> k6 </ci>
              <ci> H_E2_P </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k6_ </ci>
              <ci> H </ci>
              <ci> E2_P </ci>
            </apply>
            <apply>
              <times/>
              <ci> k7 </ci>
              <ci> K </ci>
              <ci> E2_P </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>

  <component cmeta:id="K_E2_P" name="K_E2_P">
    <variable units="millimolar" public_interface="out" name="K_E2_P"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="k8"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k8_"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k7"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k7_"/>
    <variable units="millimolar" public_interface="in" name="E2_P"/>
    <variable units="millimolar" public_interface="in" name="K_E2"/>
    <variable units="millimolar" public_interface="in" name="P"/>
    <variable units="millimolar" public_interface="in" name="K"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> K_E2_P </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/> 
            <apply>
              <times/>
              <ci> k7 </ci>
              <ci> K </ci>
              <ci> E2_P </ci>
            </apply>
            <apply>
              <times/>
              <ci> k8_ </ci>
              <ci> P </ci>
              <ci> K_E2 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k8 </ci>
              <ci> K_E2_P </ci>
            </apply>
            <apply>
              <times/>
              <ci> k7_ </ci>
              <ci> K_E2_P </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>

  <component cmeta:id="K_E2" name="K_E2">
    <variable units="millimolar" public_interface="out" name="K_E2"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="k8"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k8_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k9"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k9_"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k10"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k10_"/>
    <variable units="millimolar" public_interface="in" name="K_E2_ATP"/>
    <variable units="millimolar" public_interface="in" name="K_E1"/>
    <variable units="millimolar" public_interface="in" name="K_E2_P"/>
    <variable units="millimolar" public_interface="in" name="P"/>
    <variable units="millimolar" public_interface="in" name="ATP"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> K_E2 </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/> 
            <apply>
              <times/>
              <ci> k8 </ci>
              <ci> K_E2_P </ci>
            </apply>
            <apply>
              <times/>
              <ci> k10_ </ci>
              <ci> K_E2_ATP </ci>
            </apply>
            <apply>
              <times/>
              <ci> k9_ </ci>
              <ci> K_E1 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> k8_ </ci>
              <ci> P </ci>
              <ci> K_E2 </ci> 
            </apply>
            <apply>
              <times/>  
              <ci> k10 </ci>
              <ci> ATP </ci>
              <ci> K_E2 </ci>
            </apply>
            <apply>
              <times/>
              <ci> k9 </ci>
              <ci> K_E2 </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>

  <component cmeta:id="K_E2_ATP" name="K_E2_ATP">
    <variable units="millimolar" public_interface="out" name="K_E2_ATP"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="k11"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k11_"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k10"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k10_"/>
    <variable units="millimolar" public_interface="in" name="K_E1_ATP"/>
    <variable units="millimolar" public_interface="in" name="K_E2"/>
    <variable units="millimolar" public_interface="in" name="ATP"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> K_E2_ATP </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/> 
            <apply>
              <times/>
              <ci> k10 </ci>
              <ci> ATP </ci>
              <ci> K_E2 </ci>
            </apply>
            <apply>
              <times/>
              <ci> k11_ </ci>
              <ci> K_E1_ATP </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> k10_ </ci>
              <ci> K_E2_ATP </ci> 
            </apply>
            <apply>
              <times/>  
              <ci> k11 </ci>
              <ci> K_E2_ATP </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>

  <component name="reaction_constants">
    <variable units="millimolar" public_interface="out" name="K" initial_value="20.0"/>
    <variable units="millimolar" public_interface="out" name="H" initial_value="4.0"/>
    <variable units="millimolar" public_interface="out" name="P" initial_value="5.0"/>
    <variable units="millimolar" public_interface="out" name="ATP" initial_value="2.0"/>
    <variable units="millimolar" public_interface="out" name="ADP" initial_value="0.04"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k1" initial_value="1.3E7"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k1_" initial_value="6.5"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k2" initial_value="4E3"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k2_" initial_value="4E4"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k3" initial_value="1.3E9"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k3_" initial_value="5E2"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k4" initial_value="5E1"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k4_" initial_value="2.5E6"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k5" initial_value="4E1"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k5_" initial_value="2E2"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k6" initial_value="5E7"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k6_" initial_value="5E10"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k7" initial_value="2E10"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k7_" initial_value="3.4E7"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k8" initial_value="5.4E1"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k8_" initial_value="3.2E1"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k9" initial_value="1.75E0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k9_" initial_value="3.5E1"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k10" initial_value="5E4"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k10_" initial_value="5E1"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k11" initial_value="5E2"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k11_" initial_value="5E0"/>
  </component>  
  
  
  <connection>
    <map_components component_2="environment" component_1="K_E1"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="K_E1_ATP"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="E1_ATP"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="H_E1_ATP"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="H_E1_P"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="H_E2_P"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="E2_P"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="K_E2_P"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="K_E2"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="K_E2_ATP"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="K_E1_ATP" component_1="K_E1"/>
    <map_variables variable_2="K_E1" variable_1="K_E1"/>
    <map_variables variable_2="K_E1_ATP" variable_1="K_E1_ATP"/>
  </connection>

  <connection>
    <map_components component_2="K_E2" component_1="K_E1"/>
    <map_variables variable_2="K_E1" variable_1="K_E1"/>
    <map_variables variable_2="K_E2" variable_1="K_E2"/>
  </connection>

  <connection>
    <map_components component_2="K_E1_ATP" component_1="E1_ATP"/>
    <map_variables variable_2="E1_ATP" variable_1="E1_ATP"/>
    <map_variables variable_2="K_E1_ATP" variable_1="K_E1_ATP"/>
  </connection>

  <connection>
    <map_components component_2="K_E1_ATP" component_1="K_E2_ATP"/>
    <map_variables variable_2="K_E2_ATP" variable_1="K_E2_ATP"/>
    <map_variables variable_2="K_E1_ATP" variable_1="K_E1_ATP"/>
  </connection>

  <connection>
    <map_components component_2="H_E1_ATP" component_1="E1_ATP"/>
    <map_variables variable_2="E1_ATP" variable_1="E1_ATP"/>
    <map_variables variable_2="H_E1_ATP" variable_1="H_E1_ATP"/>
  </connection>

  <connection>
    <map_components component_2="H_E1_ATP" component_1="H_E1_P"/>
    <map_variables variable_2="H_E1_P" variable_1="H_E1_P"/>
    <map_variables variable_2="H_E1_ATP" variable_1="H_E1_ATP"/>
  </connection>

  <connection>
    <map_components component_2="H_E2_P" component_1="H_E1_P"/>
    <map_variables variable_2="H_E1_P" variable_1="H_E1_P"/>
    <map_variables variable_2="H_E2_P" variable_1="H_E2_P"/>
  </connection>

  <connection>
    <map_components component_2="H_E2_P" component_1="E2_P"/>
    <map_variables variable_2="E2_P" variable_1="E2_P"/>
    <map_variables variable_2="H_E2_P" variable_1="H_E2_P"/>
  </connection>

  <connection>
    <map_components component_2="K_E2_P" component_1="E2_P"/>
    <map_variables variable_2="E2_P" variable_1="E2_P"/>
    <map_variables variable_2="K_E2_P" variable_1="K_E2_P"/>
  </connection>

  <connection>
    <map_components component_2="K_E2_P" component_1="K_E2"/>
    <map_variables variable_2="K_E2" variable_1="K_E2"/>
    <map_variables variable_2="K_E2_P" variable_1="K_E2_P"/>
  </connection>

  <connection>
    <map_components component_2="K_E2_ATP" component_1="K_E2"/>
    <map_variables variable_2="K_E2" variable_1="K_E2"/>
    <map_variables variable_2="K_E2_ATP" variable_1="K_E2_ATP"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="K_E1"/>
    <map_variables variable_2="k9" variable_1="k9"/>
    <map_variables variable_2="k9_" variable_1="k9_"/>
    <map_variables variable_2="k1" variable_1="k1"/>
    <map_variables variable_2="k1_" variable_1="k1_"/>
    <map_variables variable_2="ATP" variable_1="ATP"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="K_E1_ATP"/>
    <map_variables variable_2="k2" variable_1="k2"/>
    <map_variables variable_2="k2_" variable_1="k2_"/>
    <map_variables variable_2="k1" variable_1="k1"/>
    <map_variables variable_2="k1_" variable_1="k1_"/>
    <map_variables variable_2="k11" variable_1="k11"/>
    <map_variables variable_2="k11_" variable_1="k11_"/>
    <map_variables variable_2="K" variable_1="K"/>
    <map_variables variable_2="ATP" variable_1="ATP"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="E1_ATP"/>
    <map_variables variable_2="k2" variable_1="k2"/>
    <map_variables variable_2="k2_" variable_1="k2_"/>
    <map_variables variable_2="k3" variable_1="k3"/>
    <map_variables variable_2="k3_" variable_1="k3_"/>
    <map_variables variable_2="K" variable_1="K"/>
    <map_variables variable_2="H" variable_1="H"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="H_E1_ATP"/>
    <map_variables variable_2="k3" variable_1="k3"/>
    <map_variables variable_2="k3_" variable_1="k3_"/>
    <map_variables variable_2="k4" variable_1="k4"/>
    <map_variables variable_2="k4_" variable_1="k4_"/>
    <map_variables variable_2="H" variable_1="H"/>
    <map_variables variable_2="ADP" variable_1="ADP"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="H_E2_P"/>
    <map_variables variable_2="k5" variable_1="k5"/>
    <map_variables variable_2="k5_" variable_1="k5_"/>
    <map_variables variable_2="k6" variable_1="k6"/>
    <map_variables variable_2="k6_" variable_1="k6_"/>
    <map_variables variable_2="H" variable_1="H"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="H_E1_P"/>
    <map_variables variable_2="k5" variable_1="k5"/>
    <map_variables variable_2="k5_" variable_1="k5_"/>
    <map_variables variable_2="k4" variable_1="k4"/>
    <map_variables variable_2="k4_" variable_1="k4_"/>
    <map_variables variable_2="ADP" variable_1="ADP"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="E2_P"/>
    <map_variables variable_2="k7" variable_1="k7"/>
    <map_variables variable_2="k7_" variable_1="k7_"/>
    <map_variables variable_2="k6" variable_1="k6"/>
    <map_variables variable_2="k6_" variable_1="k6_"/>
    <map_variables variable_2="K" variable_1="K"/>
    <map_variables variable_2="H" variable_1="H"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="K_E2_P"/>
    <map_variables variable_2="k7" variable_1="k7"/>
    <map_variables variable_2="k7_" variable_1="k7_"/>
    <map_variables variable_2="k8" variable_1="k8"/>
    <map_variables variable_2="k8_" variable_1="k8_"/>
    <map_variables variable_2="P" variable_1="P"/>
    <map_variables variable_2="K" variable_1="K"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="K_E2"/>
    <map_variables variable_2="k8" variable_1="k8"/>
    <map_variables variable_2="k8_" variable_1="k8_"/>
    <map_variables variable_2="k9" variable_1="k9"/>
    <map_variables variable_2="k9_" variable_1="k9_"/>
    <map_variables variable_2="k10" variable_1="k10"/>
    <map_variables variable_2="k10_" variable_1="k10_"/>
    <map_variables variable_2="P" variable_1="P"/>
    <map_variables variable_2="ATP" variable_1="ATP"/>
  </connection>

  <connection>
    <map_components component_2="reaction_constants" component_1="K_E2_ATP"/>
    <map_variables variable_2="k10" variable_1="k10"/>
    <map_variables variable_2="k10_" variable_1="k10_"/>
    <map_variables variable_2="k11" variable_1="k11"/>
    <map_variables variable_2="k11_" variable_1="k11_"/>
    <map_variables variable_2="ATP" variable_1="ATP"/>
  </connection>


<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#ef5223d8-008e-4026-9215-183339bf119c">
    <rdf:li>acid-base transport</rdf:li>
    <rdf:li>gastric</rdf:li>
    <rdf:li>electrophysiology</rdf:li>
    <rdf:li>collecting duct</rdf:li>
    <rdf:li>rat</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#0bb08cdb-d204-434e-8f37-03da644cfd02">
    <rdf:li rdf:resource="rdf:#0a8935a5-4df9-41a1-8d97-e6ddef456a67"/>
  </rdf:Seq>
  <rdf:Description rdf:about="">
    <dc:title>A mathematical model of the inner medullary collecting duct of the rat: acid/base transport (Gastric H+/K+ ATPase Variant)</dc:title>
	<dc:publisher>The University of Auckland, Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#3376ccc5-2ffa-41f0-a2f3-66ab3f68ac61"/>
    <dcterms:created rdf:resource="rdf:#eea9173d-4f5b-45dc-b411-47e4ea114c68"/>
    <dc:creator rdf:resource="rdf:#376eead8-3ceb-4f66-be76-560576da8be4"/>
    <cmeta:modification rdf:resource="rdf:#7ad6d786-a394-401d-9e8c-ebe5c4864b90"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fb867cb3-c0ad-458a-92fa-ca29ac2997ed">
    <dc:creator rdf:resource="rdf:#60abcc7c-ec93-49c0-948d-88db35af6fb9"/>
    <rdf:value>This is the CellML description of Weinstein's 1998 mathematical &#13;
          model of the gastric H-K-ATPase in rats.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#29244cb3-80b2-4d4a-9535-27715ab0a196">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2e901ce6-bda7-448d-a0cf-a9866d440ec8">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9c435fda-4b25-4444-bf8b-8e9f616726fe">
    <dcterms:W3CDTF>1998-05</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#75702915-6139-4dca-a27d-16077490e79f">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0a8935a5-4df9-41a1-8d97-e6ddef456a67">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#3e30c56f-0d27-4fdb-8781-fe4583925521"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#eea9173d-4f5b-45dc-b411-47e4ea114c68">
    <dcterms:W3CDTF>2007-05-25T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#314979af-8b3a-4cda-a7ab-c2be720ad171">
    <dc:title>Journal of Physiology</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3458698f-38db-4152-8076-a71e6b237ac9">
    <bqs:Pubmed_id>9612322</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#2b364b34-b0b1-4e7c-adeb-48ef86d976b6"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2b364b34-b0b1-4e7c-adeb-48ef86d976b6">
    <dc:creator rdf:resource="rdf:#0bb08cdb-d204-434e-8f37-03da644cfd02"/>
    <dc:title>A mathematical model of the inner medullary collecting duct of the &#13;
            rat: acid/base transport</dc:title>
    <bqs:volume>274</bqs:volume>
    <bqs:first_page>F856</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#314979af-8b3a-4cda-a7ab-c2be720ad171"/>
    <dcterms:issued rdf:resource="rdf:#9c435fda-4b25-4444-bf8b-8e9f616726fe"/>
    <bqs:last_page>F867</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#30ff896a-1c74-4431-ae3d-87dde72bbaaf">
    <vCard:N rdf:resource="rdf:#29244cb3-80b2-4d4a-9535-27715ab0a196"/>
  </rdf:Description>
  <rdf:Description rdf:about="#weinstein_1998_gastric_H_K_ATPase_model">
    <dc:title>
        The 1998 Weinstein mathematical model of the gastric H-K-ATPase.
      </dc:title>
    <cmeta:bio_entity>Parietal Cell</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#fb867cb3-c0ad-458a-92fa-ca29ac2997ed"/>
    <bqs:reference rdf:resource="rdf:#3458698f-38db-4152-8076-a71e6b237ac9"/>
    <bqs:reference rdf:resource="rdf:#b88e2fc1-06a9-47e9-ba11-fbd806aa9b9e"/>
    <cmeta:species>Rat</cmeta:species>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b88e2fc1-06a9-47e9-ba11-fbd806aa9b9e">
    <dc:subject rdf:resource="rdf:#940b725a-222c-4f67-a7e0-b8062ad9a3aa"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1a00e098-c6f5-4d72-98ac-43f5eff47a7a">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#376eead8-3ceb-4f66-be76-560576da8be4">
    <vCard:ORG rdf:resource="rdf:#1a00e098-c6f5-4d72-98ac-43f5eff47a7a"/>
    <vCard:EMAIL rdf:resource="rdf:#2e901ce6-bda7-448d-a0cf-a9866d440ec8"/>
    <vCard:N rdf:resource="rdf:#75702915-6139-4dca-a27d-16077490e79f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3e30c56f-0d27-4fdb-8781-fe4583925521">
    <vCard:Given>Alan</vCard:Given>
    <vCard:Family>Weinstein</vCard:Family>
    <vCard:Other>M</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3376ccc5-2ffa-41f0-a2f3-66ab3f68ac61">
    <dc:creator rdf:resource="rdf:#9a7efb92-8389-4941-a859-24ca0609a9bf"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#940b725a-222c-4f67-a7e0-b8062ad9a3aa">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#ef5223d8-008e-4026-9215-183339bf119c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#60abcc7c-ec93-49c0-948d-88db35af6fb9">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e93b27ca-9c2f-44a9-823c-08be568688e1">
    <dcterms:W3CDTF>2007-06-05T09:27:29+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7ad6d786-a394-401d-9e8c-ebe5c4864b90">
    <dcterms:modified rdf:resource="rdf:#e93b27ca-9c2f-44a9-823c-08be568688e1"/>
    <rdf:value>The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics.  This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology.&#13;
&#13;
The model runs in the PCEnv simulator but gives a flat output.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#30ff896a-1c74-4431-ae3d-87dde72bbaaf"/>
  </rdf:Description>
</rdf:RDF>
</model>
