// This CellML file was generated on 15/01/2008 at 11:28:40 using:
//
// COR (0.9.31.857)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// publisher: Department of Physiology, Anatomy & Genetics, University of Oxford
// comment: FN James Lawson; This model has been curated by Penny Noble and is known to run in PCEnv and COR. It is able to produce the results of the model published in the Matsuoka 2003 paper but still contains some unit discrepancies.
// created: W3CDTF 2006-05-15T00:00:00+00:00
// creator: Orgname Oxford University; Orgunit Department of Physiology, Anatomy & Genetics; penny.noble@dpag.ox.ac.uk; Given Penny; Family Noble; Other J
// modification: W3CDTF 2008-02-25T12:32:09+13:00; units checked, curated; Given Penny; Family Noble; Other J
// modification: W3CDTF 2007-10-30T11:32:02+13:00; A multiple stimulus protocol component has been added to this model to allow simulations of trains of action potentials. Several variables have also been given cmeta:ids to allow them to be referenced in a PCEnv session file.; Given James; Family Lawson; Other Richard
// simulation: endingValue 10; nonstandard-pointDensity 50000; maximumStepSize 0.001; nonstandard-algorithm bdf15
// reference: Pubmed_id 10082479; Given Raimond; Family Winslow; Other L; Given John; Family Rice; Other J; Given M; Family Jafri; Other S; Given Eduardo; Family Marban; Given Brian; Family O'Rorke; title Mechanisms of Altered Excitation-Contraction Coupling in Canine Tachycardia-Induced Heart Failure, II Model Studies; volume 84; first_page 571; title Circulation Research; W3CDTF 1999-03-19 00:00; last_page 586
// reference: subject_type keyword; heart failure; ventricular myocyte; excitation-contraction coupling; canine; calcium dynamics; Ventricular Myocyte; electrophysiology; cardiac; tachycardia
// comment: FN Catherine Lloyd; This is the CellML description of Winslow et al's mathematical model of ionic fluxes and Ca regulation in normal and failing ventricular myocytes. This model is derived from Jafri et al's guinea pig ventricular model (1998) with modifications to better represent the conditions in a canine midmyocardial ventricular cell.
def model winslow_model_1999 as
  // Canine Ventricular Cell Model, 1999
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This model has been curated and unit-checked by Penny Noble and is known to run in PCEnv and COR to replicate the published results.
  //
  // Model Structure
  //
  // In 1999 Raimond Winslow, Jeremy Rice, Saleet Jafri, Eduardo Marban and Brian O'Rourke published a computational model of the action potential and of intracellular Ca2+ handling in normal and failing canine ventricular myocytes. Using the experimental data of O'Rourke et al (1999) they modified Jafri et al's guinea pig ventricular cell model (1999) to make it appropriate for canine midmyocardial cells (see the figure below). The CellML description here is of the normal canine ventricular myocyte model. In failing myocytes i_to1 and i_K1 are down regulated on average by 66 percent and 32 percent respectively. The kinetic properties of i_to1 and the gating behaviour if i_K1 remain unaltered. Only the number of expressed channels is reduced (the control may be pre- or post-transcriptional but it is not post-translational). On the basis of these data, the effects of terminal heart failure are modelled by reducing the peak conductance of i_to1 and i_K1. Downregulation of the sarcoplasmic reticulum Ca2+ pump is modelled by simultaneous scaling of both the forward and reverse maximum pump rates Vmaxf and Vmaxr by a scale factor KSR. Upregulation of the Na-Ca exchanger is modelled by increasing a scale factor KNaCa.
  //
  // The complete original paper reference is cited below:
  //
  // Mechanisms of Altered Excitation-Contraction Coupling in Canine Tachycardia-Induced Heart Failure, II Model Studies (http://circres.ahajournals.org/cgi/content/full/84/5/571), Raimond L. Winslow, Jeremy Rice, Saleet Jafri, Eduardo Marban and Brian O'Rourke, 1999, Circulation Research (http://circres.ahajournals.org/), 84, 571-586. PubMed ID: 10082479 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=10082479&dopt=Abstract)
  //
  // cell diagram of the Winslow et al ventricular cell model showing ionic currents, pumps and exchangers within the sarcolemma and the sarcoplasmic reticulum
  //
  // A schematic diagram describing the current flows across the cell membrane that are captured in the Winslow et al canine ventricular cell model.
  //
  // the cellml rendering of the Winslow et al model
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit s_ms as
    unit second;
    unit second {pref: milli, expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {pref: micro, expo: -1};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {pref: micro, expo: -1};
  enddef;
  def unit nA_microA as
    unit ampere {pref: nano};
    unit ampere {pref: micro, expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millimolar3_per_second as
    unit millimolar {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit millimolar4_per_second as
    unit millimolar {expo: -4};
    unit second {expo: -1};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {pref: milli, expo: -1};
  enddef;
  def unit cm_per_second as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit cm_per_farad_second as
    unit metre {pref: centi};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit cm2 as
    unit metre {pref: centi, expo: 2};
  enddef;
  def unit micro_litre as
    unit litre {pref: micro};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {pub: out, init: -96.1638};
    var R: joule_per_mole_kelvin {pub: out, init: 8.314472};
    var T: kelvin {pub: out, init: 310};
    var F: coulomb_per_millimole {pub: out, init: 96.4853415};
    var C_sc: microF_per_cm2 {pub: out, init: 0.001};
    var time: second {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_Ca: microA_per_microF {pub: in};
    var i_Ca_K: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_to1: microA_per_microF {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_Kp: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    var i_Stim: microA_per_microF {pub: out};
    var stim_start: second {init: 0.1};
    var stim_end: second {init: 100000000};
    var stim_period: second {init: 1};
    var stim_duration: second {init: 0.002};
    var stim_amplitude: microA_per_microF {init: -21.1268};
    i_Stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{microA_per_microF};
    endsel;
    ode(V, time) = -1{microF_per_cm2}*1{nA_microA}*(i_Na+i_Ca+i_Ca_K+i_Kr+i_Ks+i_to1+i_K1+i_Kp+i_NaCa+i_NaK+i_p_Ca+i_Na_b+i_Ca_b+i_Stim)/C_sc;
  enddef;

  def comp fast_sodium_current as
    var i_Na: microA_per_microF {pub: out};
    var E_Na: millivolt {pub: out};
    var g_Na: milliS_per_microF {init: 12.8};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    E_Na = R*T/F*ln(Nao/Nai);
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {pub: out, init: 0.0328302};
    var alpha_m: per_second;
    var beta_m: per_second;
    var E0_m: millivolt;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    E0_m = V+47.13{millivolt};
    alpha_m = sel
      case abs(E0_m) < 0.00001{millivolt}:
        1000{per_second}/(0.1{dimensionless}-0.005{per_millivolt}*E0_m);
      otherwise:
        320{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 80{per_second}*exp(-V/11{millivolt});
    ode(m, time) = sel
      case V >= -90{millivolt}:
        alpha_m*(1{dimensionless}-m)-beta_m*m;
      otherwise:
        0{per_second};
    endsel;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {pub: out, init: 0.988354};
    var alpha_h: per_second;
    var beta_h: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = sel
      case V < -40{millivolt}:
        135{per_second}*exp((80{millivolt}+V)/(-6.8{millivolt}));
      otherwise:
        0{per_second};
    endsel;
    beta_h = sel
      case V < -40{millivolt}:
        3560{per_second}*exp(0.079{per_millivolt}*V)+310000{per_second}*exp(0.35{per_millivolt}*V);
      otherwise:
        1000{dimensionless}/(0.13{second}*(1{dimensionless}+exp((V+10.66{millivolt})/(-11.1{millivolt}))));
    endsel;
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp fast_sodium_current_j_gate as
    var j: dimensionless {pub: out, init: 0.99254};
    var alpha_j: per_second;
    var beta_j: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_j = sel
      case V < -40{millivolt}:
        1000{dimensionless}*(-(127140{per_millivolt_second}*exp(0.2444{per_millivolt}*V)+0.00003474{per_millivolt_second}*exp(-0.04391{per_millivolt}*V)))*(V+37.78{millivolt})/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt})));
      otherwise:
        0{per_second};
    endsel;
    beta_j = sel
      case V < -40{millivolt}:
        121.2{per_second}*exp(-0.01052{per_millivolt}*V)/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt})));
      otherwise:
        300{per_second}*exp(-0.0000002535{per_millivolt}*V)/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt})));
    endsel;
    ode(j, time) = alpha_j*(1{dimensionless}-j)-beta_j*j;
  enddef;

  def comp rapid_activating_delayed_rectifiyer_K_current as
    var i_Kr: microA_per_microF {pub: out};
    var E_K: millivolt {pub: out};
    var g_Kr: milliS_per_microF {init: 0.0034};
    var f_Ko: dimensionless;
    var R_V: dimensionless;
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var X_kr: dimensionless {priv: in};
    E_K = R*T/F*ln(Ko/Ki);
    f_Ko = sqrt(Ko/4{millimolar});
    R_V = 1{dimensionless}/(1{dimensionless}+1.4945{dimensionless}*exp(0.0446{per_millivolt}*V));
    i_Kr = g_Kr*f_Ko*R_V*X_kr*(V-E_K);
  enddef;

  def comp rapid_activating_delayed_rectifiyer_K_current_X_kr_gate as
    var X_kr: dimensionless {pub: out, init: 0.51};
    var K12: dimensionless;
    var K21: dimensionless;
    var X_kr_inf: dimensionless;
    var tau_X_kr: second;
    var tau_factor: dimensionless {init: 1};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    K12 = exp(-5.495{dimensionless}+0.1691{per_millivolt}*V);
    K21 = exp(-7.677{dimensionless}-0.0128{per_millivolt}*V);
    X_kr_inf = K12/(K12+K21);
    tau_X_kr = 0.001{second}/(K12+K21)+tau_factor*0.027{second};
    ode(X_kr, time) = (X_kr_inf-X_kr)/tau_X_kr;
  enddef;

  def comp slow_activating_delayed_rectifiyer_K_current as
    var i_Ks: microA_per_microF {pub: out};
    var g_Ks: milliS_per_microF {init: 0.0027134};
    var E_Ks: millivolt;
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var X_ks: dimensionless {priv: in};
    E_Ks = R*T/F*ln((Ko+0.01833{dimensionless}*Nao)/(Ki+0.01833{dimensionless}*Nai));
    i_Ks = g_Ks*sqr(X_ks)*(V-E_Ks);
  enddef;

  def comp slow_activating_delayed_rectifiyer_K_current_X_ks_gate as
    var X_ks: dimensionless {pub: out, init: 0.264};
    var tau_X_ks: second;
    var X_ks_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    X_ks_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-24.7{millivolt})/13.6{millivolt}));
    tau_X_ks = 0.001{second}/(0.0000719{per_millivolt}*(V-10{millivolt})/(1{dimensionless}-exp(-0.148{per_millivolt}*(V-10{millivolt})))+0.000131{per_millivolt}*(V-10{millivolt})/(exp(0.0687{per_millivolt}*(V-10{millivolt}))-1{dimensionless}));
    ode(X_ks, time) = (X_ks_infinity-X_ks)/tau_X_ks;
  enddef;

  def comp transient_outward_potassium_current as
    var i_to1: microA_per_microF {pub: out};
    var g_to1: milliS_per_microF {init: 0.23815};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var X_to1: dimensionless {priv: in};
    var Y_to1: dimensionless {priv: in};
    i_to1 = g_to1*X_to1*Y_to1*(V-E_K);
  enddef;

  def comp transient_outward_potassium_current_X_to1_gate as
    var X_to1: dimensionless {pub: out, init: 2.63};
    var alpha_X_to1: per_second;
    var beta_X_to1: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_X_to1 = 45.16{per_second}*exp(0.03577{per_millivolt}*V);
    beta_X_to1 = 98.9{per_second}*exp(-0.06237{per_millivolt}*V);
    ode(X_to1, time) = alpha_X_to1*(1{dimensionless}-X_to1)-beta_X_to1*X_to1;
  enddef;

  def comp transient_outward_potassium_current_Y_to1_gate as
    var Y_to1: dimensionless {pub: out, init: 0.99};
    var alpha_Y_to1: per_second;
    var beta_Y_to1: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_Y_to1 = 5.415{per_second}*exp(-(V+33.5{millivolt})/5{millivolt})/(1{dimensionless}+0.051335{dimensionless}*exp(-(V+33.5{millivolt})/5{millivolt}));
    beta_Y_to1 = 5.415{per_second}*exp((V+33.5{millivolt})/5{millivolt})/(1{dimensionless}+0.051335{dimensionless}*exp((V+33.5{millivolt})/5{millivolt}));
    ode(Y_to1, time) = alpha_Y_to1*(1{dimensionless}-Y_to1)-beta_Y_to1*Y_to1;
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: microA_per_microF {pub: out};
    var g_K1: milliS_per_microF {init: 2.8};
    var K_mK1: millimolar {init: 13};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: joule_per_mole_kelvin {pub: in, priv: out};
    var T: kelvin {pub: in, priv: out};
    var F: coulomb_per_millimole {pub: in, priv: out};
    var E_K: millivolt {pub: in, priv: out};
    var Ko: millimolar {pub: in};
    var K1_infinity_V: dimensionless {priv: in};
    i_K1 = g_K1*K1_infinity_V*Ko/(Ko+K_mK1)*(V-E_K);
  enddef;

  def comp time_independent_potassium_current_K1_gate as
    var K1_infinity_V: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var E_K: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    K1_infinity_V = 1{dimensionless}/(2{dimensionless}+exp(1.5{dimensionless}*F/(R*T)*(V-E_K)));
  enddef;

  def comp plateau_potassium_current as
    var i_Kp: microA_per_microF {pub: out};
    var g_Kp: milliS_per_microF {init: 0.002216};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var Kp_V: dimensionless {priv: in};
    i_Kp = g_Kp*Kp_V*(V-E_K);
  enddef;

  def comp plateau_potassium_current_Kp_gate as
    var Kp_V: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    Kp_V = 1{dimensionless}/(1{dimensionless}+exp((7.488{millivolt}-V)/5.98{millivolt}));
  enddef;

  def comp Na_Ca_exchanger as
    var i_NaCa: microA_per_microF {pub: out};
    var K_mCa: millimolar {init: 1.38};
    var K_mNa: millimolar {init: 87.5};
    var K_NaCa: microA_per_microF {init: 0.3};
    var K_sat: dimensionless {init: 0.2};
    var eta: dimensionless {init: 0.35};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    i_NaCa = K_NaCa*5000{dimensionless}/((pow(K_mNa, 3{dimensionless})+pow(Nao, 3{dimensionless}))*(K_mCa+Cao)*(1{dimensionless}+K_sat*exp((eta-1{dimensionless})*V*F/(R*T))))*(exp(eta*V*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-exp((eta-1{dimensionless})*V*F/(R*T))*pow(Nao, 3{dimensionless})*Cai);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: microA_per_microF {pub: out};
    var I_NaK: microA_per_microF {init: 0.693};
    var f_NaK: dimensionless;
    var K_mNai: millimolar {init: 10};
    var K_mKo: millimolar {init: 1.5};
    var sigma: dimensionless;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Nao/67.3{millimolar})-1{dimensionless});
    i_NaK = I_NaK*f_NaK/(1{dimensionless}+pow(K_mNai/Nai, 1.5{dimensionless}))*Ko/(Ko+K_mKo);
  enddef;

  def comp sarcolemmal_calcium_pump as
    var i_p_Ca: microA_per_microF {pub: out};
    var K_mpCa: millimolar {init: 0.00005};
    var I_pCa: microA_per_microF {init: 0.05};
    var time: second {pub: in};
    var Cai: millimolar {pub: in};
    i_p_Ca = I_pCa*Cai/(K_mpCa+Cai);
  enddef;

  def comp calcium_background_current as
    var i_Ca_b: microA_per_microF {pub: out};
    var g_Cab: milliS_per_microF {init: 0.0003842};
    var E_Ca: millivolt;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V-E_Ca);
  enddef;

  def comp sodium_background_current as
    var i_Na_b: microA_per_microF {pub: out};
    var g_Nab: milliS_per_microF {init: 0.0031};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    i_Na_b = g_Nab*(V-E_Na);
  enddef;

  def comp L_type_Ca_current as
    var i_Ca: microA_per_microF {pub: out};
    var i_Ca_K: microA_per_microF {pub: out};
    var P_Ca: cm_per_second {init: 3.125e-4};
    var P_K: cm_per_second {init: 5.79e-7};
    var p_prime_k: cm_per_second;
    var i_Ca_half: microA_per_microF {init: -0.265};
    var i_Ca_max: microA_per_microF;
    var O: dimensionless {init: 9.84546e-21};
    var O_Ca: dimensionless {init: 0};
    var alpha: per_second;
    var beta: per_second;
    var gamma: per_second;
    var alpha_a: per_second;
    var beta_b: per_second;
    var a: dimensionless {init: 2};
    var b: dimensionless {init: 2};
    var g: per_second {init: 2000};
    var f: per_second {init: 300};
    var gprime: per_second {init: 7000};
    var fprime: per_second {init: 7};
    var omega: per_second {init: 10};
    var C0: dimensionless {init: 0.997208};
    var C1: dimensionless {init: 6.38897e-5};
    var C2: dimensionless {init: 1.535e-9};
    var C3: dimensionless {init: 1.63909e-14};
    var C4: dimensionless {init: 6.56337e-20};
    var C_Ca0: dimensionless {init: 0.00272826};
    var C_Ca1: dimensionless {init: 6.99215e-7};
    var C_Ca2: dimensionless {init: 6.71989e-11};
    var C_Ca3: dimensionless {init: 2.87031e-15};
    var C_Ca4: dimensionless {init: 4.59752e-20};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var C_sc: microF_per_cm2 {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var y: dimensionless {priv: in};
    i_Ca = i_Ca_max*y*(O+O_Ca);
    i_Ca_K = p_prime_k/(1{microF_per_cm2}*1{s_ms})*y*(O+O_Ca)*V*sqr(F)/(R*T)*(Ki*exp(V*F/(R*T))-Ko)/(exp(V*F/(R*T))-1{dimensionless});
    p_prime_k = P_K/(1{dimensionless}+i_Ca_max/i_Ca_half);
    i_Ca_max = P_Ca/(1{microF_per_cm2}*1{s_ms})*4{dimensionless}*V*sqr(F)*1000{dimensionless}/(R*T)*(0.001{millimolar}*exp(2{dimensionless}*V*F/(R*T))-0.341{dimensionless}*Cao)/(exp(2{dimensionless}*V*F/(R*T))-1{dimensionless});
    alpha = 400{per_second}*exp((V+2{millivolt})/10{millivolt});
    beta = 50{per_second}*exp(-(V+2{millivolt})/13{millivolt});
    alpha_a = alpha*a;
    beta_b = beta/b;
    gamma = 103.75{per_second}*Ca_ss/1{millimolar};
    ode(C0, time) = beta*C1+omega*C_Ca0-(4{dimensionless}*alpha+gamma)*C0;
    ode(C1, time) = 4{dimensionless}*alpha*C0+2{dimensionless}*beta*C2+omega/b*C_Ca1-(beta+3{dimensionless}*alpha+gamma*a)*C1;
    ode(C2, time) = 3{dimensionless}*alpha*C1+3{dimensionless}*beta*C3+omega/sqr(b)*C_Ca2-(beta*2{dimensionless}+2{dimensionless}*alpha+gamma*sqr(a))*C2;
    ode(C3, time) = 2{dimensionless}*alpha*C2+4{dimensionless}*beta*C4+omega/pow(b, 3{dimensionless})*C_Ca3-(beta*3{dimensionless}+alpha+gamma*pow(a, 3{dimensionless}))*C3;
    ode(C4, time) = alpha*C3+g*O+omega/pow(b, 4{dimensionless})*C_Ca4-(beta*4{dimensionless}+f+gamma*pow(a, 4{dimensionless}))*C4;
    ode(O, time) = f*C4-g*O;
    ode(C_Ca0, time) = beta_b*C_Ca1+gamma*C0-(4{dimensionless}*alpha_a+omega)*C_Ca0;
    ode(C_Ca1, time) = 4{dimensionless}*alpha_a*C_Ca0+2{dimensionless}*beta_b*C_Ca2+gamma*a*C1-(beta_b+3{dimensionless}*alpha_a+omega/b)*C_Ca1;
    ode(C_Ca2, time) = 3{dimensionless}*alpha_a*C_Ca1+3{dimensionless}*beta_b*C_Ca3+gamma*sqr(a)*C2-(beta_b*2{dimensionless}+2{dimensionless}*alpha_a+omega/sqr(b))*C_Ca2;
    ode(C_Ca3, time) = 2{dimensionless}*alpha_a*C_Ca2+4{dimensionless}*beta_b*C_Ca4+gamma*pow(a, 3{dimensionless})*C3-(beta_b*3{dimensionless}+alpha_a+omega/pow(b, 3{dimensionless}))*C_Ca3;
    ode(C_Ca4, time) = alpha_a*C_Ca3+gprime*O_Ca+gamma*pow(a, 4{dimensionless})*C4-(beta_b*4{dimensionless}+fprime+omega/pow(b, 4{dimensionless}))*C_Ca4;
    ode(O_Ca, time) = fprime*C_Ca4-gprime*O_Ca;
  enddef;

  def comp L_type_Ca_current_y_gate as
    var y: dimensionless {pub: out, init: 0.798};
    var y_infinity: dimensionless;
    var tau_y: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    y_infinity = 0.8{dimensionless}/(1{dimensionless}+exp((V+12.5{millivolt})/5{millivolt}))+0.2{dimensionless};
    tau_y = (20{second}+600{second}/(1{dimensionless}+exp((V+20{millivolt})/9.5{millivolt})))/1000{dimensionless};
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  def comp RyR_channel as
    var J_rel: millimolar_per_second {pub: out};
    var v1: per_second {init: 1800};
    var k_a_plus: millimolar4_per_second {init: 1.215e13};
    var k_a_minus: per_second {init: 576};
    var k_b_plus: millimolar3_per_second {init: 4.05e9};
    var k_b_minus: per_second {init: 1930};
    var k_c_plus: per_second {init: 100};
    var k_c_minus: per_second {init: 0.8};
    var P_O1: dimensionless {init: 0};
    var P_O2: dimensionless {init: 0};
    var P_C1: dimensionless {init: 0.47};
    var P_C2: dimensionless {init: 0.53};
    var n: dimensionless {init: 4};
    var m: dimensionless {init: 3};
    var time: second {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Ca_JSR: millimolar {pub: in};
    ode(P_C1, time) = -k_a_plus*pow(Ca_ss, n)*P_C1+k_a_minus*P_O1;
    ode(P_O1, time) = k_a_plus*pow(Ca_ss, n)*P_C1-(k_a_minus*P_O1+k_b_plus*pow(Ca_ss, m)*P_O1+k_c_plus*P_O1)+k_b_minus*P_O2+k_c_minus*P_C2;
    ode(P_O2, time) = k_b_plus*pow(Ca_ss, m)*P_O1-k_b_minus*P_O2;
    ode(P_C2, time) = k_c_plus*P_O1-k_c_minus*P_C2;
    J_rel = v1*(P_O1+P_O2)*(Ca_JSR-Ca_ss);
  enddef;

  def comp SERCA2a_pump as
    var J_up: millimolar_per_second {pub: out};
    var K_fb: millimolar {init: 0.000168};
    var K_rb: millimolar {init: 3.29};
    var fb: dimensionless;
    var rb: dimensionless;
    var Vmaxf: millimolar_per_second {init: 0.0813};
    var Vmaxr: millimolar_per_second {init: 0.318};
    var K_SR: dimensionless {init: 1};
    var N_fb: dimensionless {init: 1.2};
    var N_rb: dimensionless {init: 1};
    var time: second {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_NSR: millimolar {pub: in};
    fb = pow(Cai/K_fb, N_fb);
    rb = pow(Ca_NSR/K_rb, N_rb);
    J_up = K_SR*(Vmaxf*fb-Vmaxr*rb)/(1{dimensionless}+fb+rb);
  enddef;

  def comp intracellular_Ca_fluxes as
    var J_tr: millimolar_per_second {pub: out};
    var J_xfer: millimolar_per_second {pub: out};
    var J_trpn: millimolar_per_second {pub: out};
    var tau_tr: second {init: 0.0005747};
    var tau_xfer: second {init: 0.0267};
    var HTRPNCa: millimolar {init: 0.98};
    var LTRPNCa: millimolar {init: 0.078};
    var J_HTRPNCa: millimolar_per_second;
    var J_LTRPNCa: millimolar_per_second;
    var HTRPN_tot: dimensionless {init: 0.14};
    var LTRPN_tot: dimensionless {init: 0.07};
    var k_htrpn_plus: per_millimolar_second {init: 20000};
    var k_htrpn_minus: per_second {init: 0.066};
    var k_ltrpn_plus: per_millimolar_second {init: 40000};
    var k_ltrpn_minus: per_second {init: 40};
    var time: second {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_NSR: millimolar {pub: in};
    var Ca_JSR: millimolar {pub: in};
    J_tr = (Ca_NSR-Ca_JSR)/tau_tr;
    J_xfer = (Ca_ss-Cai)/tau_xfer;
    J_trpn = HTRPN_tot*J_HTRPNCa+LTRPN_tot*J_LTRPNCa;
    J_HTRPNCa = ode(HTRPNCa, time);
    ode(HTRPNCa, time) = k_htrpn_plus*Cai*(1{millimolar}-HTRPNCa)-k_htrpn_minus*HTRPNCa;
    J_LTRPNCa = ode(LTRPNCa, time);
    ode(LTRPNCa, time) = k_ltrpn_plus*Cai*(1{millimolar}-LTRPNCa)-k_ltrpn_minus*LTRPNCa;
  enddef;

  def comp intracellular_ion_concentrations as
    var Nai: millimolar {pub: out, init: 10};
    var Cai: millimolar {pub: out, init: 0.00008};
    var Ki: millimolar {pub: out, init: 157.8};
    var Ca_ss: millimolar {pub: out, init: 0.00011};
    var Ca_JSR: millimolar {pub: out, init: 0.257};
    var Ca_NSR: millimolar {pub: out, init: 0.257};
    var A_cap: cm2 {init: 0.0001534};
    var V_myo: micro_litre {init: 0.00002584};
    var V_JSR: micro_litre {init: 0.00000016};
    var V_NSR: micro_litre {init: 0.0000021};
    var V_SS: micro_litre {init: 0.0000000012};
    var K_mCMDN: millimolar {init: 0.00238};
    var K_mEGTA: millimolar {init: 0.00015};
    var K_mCSQN: millimolar {init: 0.8};
    var CMDN_tot: millimolar {init: 0.05};
    var EGTA_tot: millimolar {init: 0};
    var CSQN_tot: millimolar {init: 15};
    var beta_i: dimensionless;
    var beta_SS: dimensionless;
    var beta_JSR: dimensionless;
    var time: second {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var C_sc: microF_per_cm2 {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_Ca: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_Ca_K: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_Kp: microA_per_microF {pub: in};
    var i_to1: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var J_up: millimolar_per_second {pub: in};
    var J_rel: millimolar_per_second {pub: in};
    var J_xfer: millimolar_per_second {pub: in};
    var J_trpn: millimolar_per_second {pub: in};
    var J_tr: millimolar_per_second {pub: in};
    ode(Cai, time) = beta_i*(J_xfer-(J_up+J_trpn)+(2{dimensionless}*i_NaCa-(i_p_Ca+i_Ca_b))*A_cap*1{microF_per_cm2}/(2{dimensionless}*V_myo*F));
    ode(Nai, time) = -0{dimensionless}*(i_Na+i_Na_b+i_NaCa*3{dimensionless}+i_NaK*3{dimensionless})*A_cap*1{microF_per_cm2}/(V_myo*F);
    ode(Ki, time) = -0{dimensionless}*(i_Ca_K+i_Kr+i_Ks+i_K1+i_Kp+i_to1+i_NaK*(-2{dimensionless}))*A_cap*1{microF_per_cm2}/(V_myo*F);
    beta_i = 1{dimensionless}/(1{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Cai)+EGTA_tot*K_mEGTA/sqr(K_mEGTA+Cai));
    beta_SS = 1{dimensionless}/(1{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Ca_ss)+EGTA_tot*K_mEGTA/sqr(K_mEGTA+Ca_ss));
    beta_JSR = 1{dimensionless}/(1{dimensionless}+CSQN_tot*K_mCSQN/sqr(K_mCSQN+Ca_JSR));
    ode(Ca_ss, time) = beta_SS*(J_rel*V_JSR/V_SS-J_xfer*V_myo/V_SS-i_Ca*A_cap*1{microF_per_cm2}/(2{dimensionless}*V_SS*F));
    ode(Ca_JSR, time) = beta_JSR*(J_tr-J_rel);
    ode(Ca_NSR, time) = J_up*V_myo/V_NSR-J_tr*V_JSR/V_NSR;
  enddef;

  def comp standard_ionic_concentrations as
    var Nao: millimolar {pub: out, init: 138};
    var Cao: millimolar {pub: out, init: 2};
    var Ko: millimolar {pub: out, init: 4};
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp rapid_activating_delayed_rectifiyer_K_current incl
        comp rapid_activating_delayed_rectifiyer_K_current_X_kr_gate;
      endcomp;
      comp slow_activating_delayed_rectifiyer_K_current incl
        comp slow_activating_delayed_rectifiyer_K_current_X_ks_gate;
      endcomp;
      comp transient_outward_potassium_current incl
        comp transient_outward_potassium_current_X_to1_gate;
        comp transient_outward_potassium_current_Y_to1_gate;
      endcomp;
      comp time_independent_potassium_current incl
        comp time_independent_potassium_current_K1_gate;
      endcomp;
      comp plateau_potassium_current incl
        comp plateau_potassium_current_Kp_gate;
      endcomp;
      comp Na_Ca_exchanger;
      comp sodium_potassium_pump;
      comp sarcolemmal_calcium_pump;
      comp calcium_background_current;
      comp sodium_background_current;
      comp L_type_Ca_current incl
        comp L_type_Ca_current_y_gate;
      endcomp;
      comp RyR_channel;
      comp SERCA2a_pump;
      comp intracellular_Ca_fluxes;
      comp intracellular_ion_concentrations;
      comp standard_ionic_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp rapid_activating_delayed_rectifiyer_K_current incl
      comp rapid_activating_delayed_rectifiyer_K_current_X_kr_gate;
    endcomp;
    comp slow_activating_delayed_rectifiyer_K_current incl
      comp slow_activating_delayed_rectifiyer_K_current_X_ks_gate;
    endcomp;
    comp transient_outward_potassium_current incl
      comp transient_outward_potassium_current_X_to1_gate;
      comp transient_outward_potassium_current_Y_to1_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
    comp plateau_potassium_current incl
      comp plateau_potassium_current_Kp_gate;
    endcomp;
    comp L_type_Ca_current incl
      comp L_type_Ca_current_y_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and environment for
    vars time and time;
  enddef;
  def map between slow_activating_delayed_rectifiyer_K_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between plateau_potassium_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current and environment for
    vars time and time;
  enddef;
  def map between RyR_channel and environment for
    vars time and time;
  enddef;
  def map between SERCA2a_pump and environment for
    vars time and time;
  enddef;
  def map between intracellular_Ca_fluxes and environment for
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and rapid_activating_delayed_rectifiyer_K_current for
    vars V and V;
    vars i_Kr and i_Kr;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and slow_activating_delayed_rectifiyer_K_current for
    vars V and V;
    vars i_Ks and i_Ks;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and transient_outward_potassium_current for
    vars V and V;
    vars i_to1 and i_to1;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and L_type_Ca_current for
    vars V and V;
    vars i_Ca and i_Ca;
    vars i_Ca_K and i_Ca_K;
    vars R and R;
    vars T and T;
    vars F and F;
    vars C_sc and C_sc;
  enddef;
  def map between membrane and intracellular_ion_concentrations for
    vars F and F;
    vars C_sc and C_sc;
  enddef;
  def map between fast_sodium_current and intracellular_ion_concentrations for
    vars i_Na and i_Na;
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between fast_sodium_current and standard_ionic_concentrations for
    vars Nao and Nao;
  enddef;
  def map between intracellular_ion_concentrations and rapid_activating_delayed_rectifiyer_K_current for
    vars i_Kr and i_Kr;
    vars Ki and Ki;
  enddef;
  def map between standard_ionic_concentrations and rapid_activating_delayed_rectifiyer_K_current for
    vars Ko and Ko;
  enddef;
  def map between transient_outward_potassium_current and rapid_activating_delayed_rectifiyer_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and rapid_activating_delayed_rectifiyer_K_current for
    vars E_K and E_K;
  enddef;
  def map between plateau_potassium_current and rapid_activating_delayed_rectifiyer_K_current for
    vars E_K and E_K;
  enddef;
  def map between intracellular_ion_concentrations and slow_activating_delayed_rectifiyer_K_current for
    vars i_Ks and i_Ks;
    vars Ki and Ki;
    vars Nai and Nai;
  enddef;
  def map between standard_ionic_concentrations and slow_activating_delayed_rectifiyer_K_current for
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between transient_outward_potassium_current and intracellular_ion_concentrations for
    vars i_to1 and i_to1;
  enddef;
  def map between time_independent_potassium_current and intracellular_ion_concentrations for
    vars i_K1 and i_K1;
  enddef;
  def map between time_independent_potassium_current and standard_ionic_concentrations for
    vars Ko and Ko;
  enddef;
  def map between plateau_potassium_current and intracellular_ion_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between Na_Ca_exchanger and intracellular_ion_concentrations for
    vars Cai and Cai;
    vars Nai and Nai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger and standard_ionic_concentrations for
    vars Cao and Cao;
    vars Nao and Nao;
  enddef;
  def map between sodium_potassium_pump and intracellular_ion_concentrations for
    vars Nai and Nai;
    vars i_NaK and i_NaK;
  enddef;
  def map between sodium_potassium_pump and standard_ionic_concentrations for
    vars Nao and Nao;
    vars Ko and Ko;
  enddef;
  def map between sarcolemmal_calcium_pump and intracellular_ion_concentrations for
    vars i_p_Ca and i_p_Ca;
    vars Cai and Cai;
  enddef;
  def map between calcium_background_current and intracellular_ion_concentrations for
    vars Cai and Cai;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between calcium_background_current and standard_ionic_concentrations for
    vars Cao and Cao;
  enddef;
  def map between sodium_background_current and intracellular_ion_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between L_type_Ca_current and intracellular_ion_concentrations for
    vars i_Ca_K and i_Ca_K;
    vars i_Ca and i_Ca;
    vars Ki and Ki;
    vars Ca_ss and Ca_ss;
  enddef;
  def map between L_type_Ca_current and standard_ionic_concentrations for
    vars Ko and Ko;
    vars Cao and Cao;
  enddef;
  def map between RyR_channel and intracellular_ion_concentrations for
    vars J_rel and J_rel;
    vars Ca_ss and Ca_ss;
    vars Ca_JSR and Ca_JSR;
  enddef;
  def map between SERCA2a_pump and intracellular_ion_concentrations for
    vars J_up and J_up;
    vars Cai and Cai;
    vars Ca_NSR and Ca_NSR;
  enddef;
  def map between intracellular_Ca_fluxes and intracellular_ion_concentrations for
    vars J_tr and J_tr;
    vars J_xfer and J_xfer;
    vars J_trpn and J_trpn;
    vars Cai and Cai;
    vars Ca_NSR and Ca_NSR;
    vars Ca_ss and Ca_ss;
    vars Ca_JSR and Ca_JSR;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and rapid_activating_delayed_rectifiyer_K_current_X_kr_gate for
    vars X_kr and X_kr;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_activating_delayed_rectifiyer_K_current and slow_activating_delayed_rectifiyer_K_current_X_ks_gate for
    vars X_ks and X_ks;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_potassium_current and transient_outward_potassium_current_X_to1_gate for
    vars X_to1 and X_to1;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_potassium_current and transient_outward_potassium_current_Y_to1_gate for
    vars Y_to1 and Y_to1;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars time and time;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars E_K and E_K;
    vars K1_infinity_V and K1_infinity_V;
  enddef;
  def map between plateau_potassium_current and plateau_potassium_current_Kp_gate for
    vars Kp_V and Kp_V;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
enddef;
