<?xml version="1.0"?>
<!--  FILE :  kyrylov_model_2005.xml

CREATED :  11th July 2007

LAST MODIFIED : 11th July 2007

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.

DESCRIPTION :  This file contains a CellML description of Kyrylov et al's 2005 mathematical model of oscillatory behaviour of the hypothalamic-pituitary-adrenal axis.

CHANGES:  
  
-->

<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="kyrylov_model_2005" name="kyrylov_model_2005">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Modeling robust oscillatory behavior of the hypothalamic-pituitary-adrenal axis</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
<section id="sec_status">
				<title>Model Status</title>
				<para>
				This CellML model runs in OpenCell, PCEnv and COR, and the units are consistent throughout. The model does not quite recreate the published results (although the output is similar), part of the reason for this might be that the original model uses reset rules to define injections of additional hormones, which is not a supported feature in CellML at present. 
           </para>
			</section>
  <sect1 id="sec_structure">
  <title>Model Structure</title>

<para>
ABSTRACT: A mathematical model of the hypothalamic-pituitary-adrenal (HPA) axis of the human endocrine system is proposed. This new model provides an improvement over previous models by introducing two nonlinear factors with physiological relevance: 1) a limit to gland size; 2) rejection of negative hormone concentrations. The result is that the new model is by far the most robust; e.g., it can tolerate at least -50% and +100% perturbations to any of its parameters. This high degree of robustness allows one, for the first time, to model features of the system such as circadian rhythm and response to hormone injections. In addition, relative to its closest predecessor, the model is simpler; it contains only about half of the parameters, and yet achieves more functions. The new model provides opportunities for teaching endocrinology within a biological or medical school context; it may also have applications in modeling and studying HPA axis disorders, for example, related to gland size dynamics, abnormal hormone levels, or stress influences. 
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="kyrylov_2005.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram of the hypothalamus-pituitary-adrenal (HPA) axis.  Stimulatory and inhibitory paths are indicated by the arrows and + or - signs respectively.  CRH represents corticotropin-releasing hormone, ACTH is corticotropin, and CBG represents corticosteroid-binding globulin.</caption>
</informalfigure>

<para>
The original paper reference is cited below:
</para>

<para>
Modeling robust oscillatory behavior of the hypothalamic-pituitary-adrenal axis, Vadim Kyrylov, Liudmila A. Severyanova, and Amandio Vieira, 2005, <emphasis>IEEE Transactions on Biomedical Engineering</emphasis>, 52, 1977-1983.   <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/16366221">PubMed ID: 16366221</ulink>
</para>

</sect1>
</article>
</documentation> 




  
  <units name="minute">
    <unit multiplier="60.0" units="second"/>
  </units>

  <units name="hour">
    <unit multiplier="3600.0" units="second"/>
  </units>

  <units name="microg_l_min">
    <unit units="dimensionless"/>
    <unit exponent="-1" units="minute"/>
  </units>

  <units name="first_order_rate_constant">
    <unit exponent="-1" units="minute"/>
  </units>
  
  
  <component name="environment">
    <variable cmeta:id="environment_time" name="time" public_interface="out" units="minute"/>
  </component>
  
  <component cmeta:id="y0" name="y0">
      
    <variable cmeta:id="y0_y0" initial_value="0.4" name="y0" public_interface="out" units="dimensionless"/>
    
    <variable cmeta:id="y0_g0" name="g0" units="dimensionless"/>
    <variable name="r0" units="dimensionless"/>
    <variable name="h0" units="dimensionless"/>
    <variable initial_value="0.010" name="S0" units="dimensionless"/>
    
    <variable name="y2" public_interface="in" units="dimensionless"/>
    <variable name="a00" public_interface="in" units="dimensionless"/>
    <variable name="a02" public_interface="in" units="dimensionless"/>
    <variable name="c0" public_interface="in" units="first_order_rate_constant"/>
    <variable name="e0" public_interface="in" units="first_order_rate_constant"/>
    <variable name="epsilon" public_interface="in" units="dimensionless"/>
    <variable name="time" public_interface="in" units="minute"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> y0 </ci> 
        </apply>
        <apply>
          <plus/>
          <apply>
            <times/>
			<cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="first_order_rate_constant"> 1.0 </cn>
			<ci> g0 </ci>
		  </apply>
          <ci> c0 </ci>
          <ci> e0 </ci>
        </apply>
      </apply>

      <apply>
        <eq/> 
        <ci> g0 </ci> 
        <apply>
          <times/>
          <ci> h0 </ci>
          <ci> r0 </ci>
        </apply>
      </apply>
          
      <apply>
        <eq/> 
        <ci> h0 </ci>   
        <piecewise>
          <piece>
            <apply>
              <divide/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> a00 </ci>
                  <ci> y0 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a02 </ci>
                  <ci> y2 </ci>
                </apply>
              </apply>
              <apply>
                <plus/>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
                <apply>
                  <times/>
                  <apply>
                    <divide/>
                    <apply>
                      <plus/>
                      <apply>
                        <times/>
                        <ci> a00 </ci>
                        <ci> y0 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a02 </ci>
                        <ci> y2 </ci>
                      </apply>
                    </apply>
                    <ci> S0 </ci>
                  </apply>
                  <apply>
                    <minus/>
                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
                    <apply>
                      <exp/>
                      <apply>
                        <minus/>
                        <apply>
                          <divide/>
                          <apply>
                            <plus/>
                            <apply>
                              <times/>
                              <ci> a00 </ci>
                              <ci> y0 </ci>
                            </apply>
                            <apply>
                              <times/>
                              <ci> a02 </ci>
                              <ci> y2 </ci>
                            </apply>
                          </apply>
                          <ci> S0 </ci>
                        </apply>
                      </apply>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <gt/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> a00 </ci>
                  <ci> y0 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a02 </ci>
                  <ci> y2 </ci>
                </apply>
              </apply>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 0.0 </cn>
            </apply>
          </piece>
          <piece>
            <apply>
              <plus/>
              <apply>
                <times/>
                <ci> a00 </ci>
                <ci> y0 </ci>
              </apply>
              <apply>
                <times/>
                <ci> a02 </ci>
                <ci> y2 </ci>
              </apply>
            </apply>
            <apply>
              <leq/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> a00 </ci>
                  <ci> y0 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a02 </ci>
                  <ci> y2 </ci>
                </apply>
              </apply>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 0.0 </cn>
            </apply>
          </piece>
        </piecewise>
      </apply>

      <apply>
        <eq/> 
        <ci> r0 </ci>   
        <piecewise>
          <piece>
            <apply>
              <minus/>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
              <apply>
                <exp/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci> S0 </ci>
                    <apply>
                      <power/>
                      <ci> y0 </ci>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2.0 </cn>
                    </apply>
                  </apply>
                  <apply>
                    <times/>
                    <apply>
                      <plus/>
                      <apply>
                        <times/>
                        <ci> a00 </ci>
                        <ci> y0 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a02 </ci>
                        <ci> y2 </ci>
                      </apply>
                    </apply>
                    <apply>
                      <power/>
                      <apply>
                        <minus/>
                        <ci> epsilon </ci>
                        <ci> y0 </ci>
                      </apply>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2.0 </cn>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <and/>
              <apply>
                <lt/>
                <ci> y0 </ci>
                <ci> epsilon </ci>
              </apply>
              <apply>
                <lt/>
                <apply>
                  <plus/>
                  <apply>
                    <times/>
                    <ci> a00 </ci>
                    <ci> y0 </ci>
                  </apply>
                  <apply>
                    <times/>
                    <ci> a02 </ci>
                    <ci> y2 </ci>
                  </apply>
                </apply>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 0.0 </cn>
              </apply>
            </apply>
          </piece>
          <otherwise>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
          </otherwise>
        </piecewise>
      </apply>        
    </math>
  </component>

  <component cmeta:id="y1" name="y1">
      
    <variable cmeta:id="y1_y1" initial_value="1.4" name="y1" public_interface="out" units="dimensionless"/>
    
    <variable name="g1" units="dimensionless"/>
    <variable name="r1" units="dimensionless"/>
    <variable name="h1" units="dimensionless"/>
    <variable initial_value="0.010" name="S1" units="dimensionless"/>
    
    <variable name="y0" public_interface="in" units="dimensionless"/>
    <variable name="a10" public_interface="in" units="dimensionless"/>
    <variable name="y2" public_interface="in" units="dimensionless"/>
    <variable name="a12" public_interface="in" units="dimensionless"/>
    <variable name="a11" public_interface="in" units="dimensionless"/>
    <variable name="e1" public_interface="in" units="first_order_rate_constant"/>
    <variable name="epsilon" public_interface="in" units="dimensionless"/>
    <variable name="time" public_interface="in" units="minute"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> y1 </ci> 
        </apply>
        <apply>
          <plus/>
          <apply>
            <times/>
			<cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="first_order_rate_constant"> 1.0 </cn>
			<ci> g1 </ci>
		  </apply>
          <ci> e1 </ci>
        </apply>
      </apply>

      <apply>
        <eq/> 
        <ci> g1 </ci> 
        <apply>
          <times/>
          <ci> h1 </ci>
          <ci> r1 </ci>
        </apply>
      </apply>
          
      <apply>
        <eq/> 
        <ci> h1 </ci>   
        <piecewise>
          <piece>
            <apply>
              <divide/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> a10 </ci>
                  <ci> y0 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a11 </ci>
                  <ci> y1 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a12 </ci>
                  <ci> y2 </ci>
                </apply>
              </apply>
              <apply>
                <plus/>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
                <apply>
                  <times/>
                  <apply>
                    <divide/>
                    <apply>
                      <plus/>
                      <apply>
                        <times/>
                        <ci> a10 </ci>
                        <ci> y0 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a11 </ci>
                        <ci> y1 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a12 </ci>
                        <ci> y2 </ci>
                      </apply>
                    </apply>
                    <ci> S1 </ci>
                  </apply>
                  <apply>
                    <minus/>
                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
                    <apply>
                      <exp/>
                      <apply>
                        <minus/>
                        <apply>
                          <divide/>
                          <apply>
                            <plus/>
                            <apply>
                              <times/>
                              <ci> a10 </ci>
                              <ci> y0 </ci>
                            </apply>
                            <apply>
                              <times/>
                              <ci> a11 </ci>
                              <ci> y1 </ci>
                            </apply>
                            <apply>
                              <times/>
                              <ci> a12 </ci>
                              <ci> y2 </ci>
                            </apply>
                          </apply>
                          <ci> S1 </ci>
                        </apply>
                      </apply>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <gt/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> a10 </ci>
                  <ci> y0 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a11 </ci>
                  <ci> y1 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a12 </ci>
                  <ci> y2 </ci>
                </apply>
              </apply>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 0.0 </cn>
            </apply>
          </piece>
          <piece>
            <apply>
              <plus/>
              <apply>
                <times/>
                <ci> a10 </ci>
                <ci> y0 </ci>
              </apply>
              <apply>
                <times/>
                <ci> a11 </ci>
                <ci> y1 </ci>
              </apply>
              <apply>
                <times/>
                <ci> a12 </ci>
                <ci> y2 </ci>
              </apply>
            </apply>
            <apply>
              <leq/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> a10 </ci>
                  <ci> y0 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a11 </ci>
                  <ci> y1 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a12 </ci>
                  <ci> y2 </ci>
                </apply>
              </apply>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 0.0 </cn>
            </apply>
          </piece>
        </piecewise>
      </apply>

      <apply>
        <eq/> 
        <ci> r1 </ci>   
        <piecewise>
          <piece>
            <apply>
              <minus/>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
              <apply>
                <exp/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci> S1 </ci>
                    <apply>
                      <power/>
                      <ci> y1 </ci>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2.0 </cn>
                    </apply>
                  </apply>
                  <apply>
                    <times/>
                    <apply>
                      <plus/>
                      <apply>
                        <times/>
                        <ci> a10 </ci>
                        <ci> y0 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a11 </ci>
                        <ci> y1 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a12 </ci>
                        <ci> y2 </ci>
                      </apply>
                    </apply>
                    <apply>
                      <power/>
                      <apply>
                        <minus/>
                        <ci> epsilon </ci>
                        <ci> y1 </ci>
                      </apply>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2.0 </cn>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <and/>
              <apply>
                <lt/>
                <ci> y1 </ci>
                <ci> epsilon </ci>
              </apply>
              <apply>
                <lt/>
                <apply>
                  <plus/>
                  <apply>
                    <times/>
                    <ci> a10 </ci>
                    <ci> y0 </ci>
                  </apply>
                  <apply>
                    <times/>
                    <ci> a11 </ci>
                    <ci> y1 </ci>
                  </apply>
                  <apply>
                    <times/>
                    <ci> a12 </ci>
                    <ci> y2 </ci>
                  </apply>
                </apply>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 0.0 </cn>
              </apply>
            </apply>
          </piece>
          <otherwise>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
          </otherwise>
        </piecewise>
      </apply>            
    </math>
  </component>

  <component cmeta:id="y2" name="y2">
      
    <variable cmeta:id="y2_y2" initial_value="1.17" name="y2" public_interface="out" units="dimensionless"/>
    
    <variable name="g2" units="dimensionless"/>
    <variable name="r2" units="dimensionless"/>
    <variable name="h2" units="dimensionless"/>
    <variable initial_value="0.010" name="S2" units="dimensionless"/>
    
    <variable name="y0" public_interface="in" units="dimensionless"/>
    <variable name="y1" public_interface="in" units="dimensionless"/>
    <variable name="y3" public_interface="in" units="dimensionless"/>
    <variable name="y4" public_interface="in" units="dimensionless"/>
    <variable name="a23" public_interface="in" units="dimensionless"/>
    <variable name="a24" public_interface="in" units="dimensionless"/>
    <variable name="a20" public_interface="in" units="dimensionless"/>
    <variable name="a21" public_interface="in" units="dimensionless"/>
    <variable name="a22" public_interface="in" units="dimensionless"/>
    <variable name="e2" public_interface="in" units="first_order_rate_constant"/>
    <variable name="epsilon" public_interface="in" units="dimensionless"/>
    <variable name="time" public_interface="in" units="minute"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> y2 </ci> 
        </apply>
        <apply>
          <plus/>
          <apply>
            <times/>
			<cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="first_order_rate_constant"> 1.0 </cn>
			<ci> g2 </ci>
		  </apply>
          <ci> e2 </ci>
        </apply>
      </apply>

      <apply>
        <eq/> 
        <ci> g2 </ci> 
        <apply>
          <times/>
          <ci> h2 </ci>
          <ci> r2 </ci>
        </apply>
      </apply>
          
      <apply>
        <eq/> 
        <ci> h2 </ci>   
        <piecewise>
          <piece>
            <apply>
              <divide/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> a20 </ci>
                  <ci> y0 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a21 </ci>
                  <ci> y1 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a22 </ci>
                  <ci> y2 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a23 </ci>
                  <ci> y3 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a24 </ci>
                  <ci> y4 </ci>
                </apply>
              </apply>
              <apply>
                <plus/>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
                <apply>
                  <times/>
                  <apply>
                    <divide/>
                    <apply>
                      <plus/>
                      <apply>
                        <times/>
                        <ci> a20 </ci>
                        <ci> y0 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a21 </ci>
                        <ci> y1 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a22 </ci>
                        <ci> y2 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a23 </ci>
                        <ci> y3 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a24 </ci>
                        <ci> y4 </ci>
                      </apply>
                    </apply>
                    <ci> S2 </ci>
                  </apply>
                  <apply>
                    <minus/>
                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
                    <apply>
                      <exp/>
                      <apply>
                        <minus/>
                        <apply>
                          <divide/>
                          <apply>
                            <plus/>
                            <apply>
                              <times/>
                              <ci> a20 </ci>
                              <ci> y0 </ci>
                            </apply>
                            <apply>
                              <times/>
                              <ci> a21 </ci>
                              <ci> y1 </ci>
                            </apply>
                            <apply>
                              <times/>
                              <ci> a22 </ci>
                              <ci> y2 </ci>
                            </apply>
                            <apply>
                              <times/>
                              <ci> a23 </ci>
                              <ci> y3 </ci>
                            </apply>
                            <apply>
                              <times/>
                              <ci> a24 </ci>
                              <ci> y4 </ci>
                            </apply>
                          </apply>
                          <ci> S2 </ci>
                        </apply>
                      </apply>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <gt/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> a20 </ci>
                  <ci> y0 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a21 </ci>
                  <ci> y1 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a22 </ci>
                  <ci> y2 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a23 </ci>
                  <ci> y3 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a24 </ci>
                  <ci> y4 </ci>
                </apply>
              </apply>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 0.0 </cn>
            </apply>
          </piece>
          <piece>
            <apply>
              <plus/>
              <apply>
                <times/>
                <ci> a20 </ci>
                <ci> y0 </ci>
              </apply>
              <apply>
                <times/>
                <ci> a21 </ci>
                <ci> y1 </ci>
              </apply>
              <apply>
                <times/>
                <ci> a22 </ci>
                <ci> y2 </ci>
              </apply>
              <apply>
                <times/>
                <ci> a23 </ci>
                <ci> y3 </ci>
              </apply>
              <apply>
                <times/>
                <ci> a24 </ci>
                <ci> y4 </ci>
              </apply>
            </apply>
            <apply>
              <leq/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> a20 </ci>
                  <ci> y0 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a21 </ci>
                  <ci> y1 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a22 </ci>
                  <ci> y2 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a23 </ci>
                  <ci> y3 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a24 </ci>
                  <ci> y4 </ci>
                </apply>
              </apply>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 0.0 </cn>
            </apply>
          </piece>
        </piecewise>
      </apply>

      <apply>
        <eq/> 
        <ci> r2 </ci>   
        <piecewise>
          <piece>
            <apply>
              <minus/>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
              <apply>
                <exp/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci> S2 </ci>
                    <apply>
                      <power/>
                      <ci> y2 </ci>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2.0 </cn>
                    </apply>
                  </apply>
                  <apply>
                    <times/>
                    <apply>
                      <plus/>
                      <apply>
                        <times/>
                        <ci> a20 </ci>
                        <ci> y0 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a21 </ci>
                        <ci> y1 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a22 </ci>
                        <ci> y2 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a23 </ci>
                        <ci> y3 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a24 </ci>
                        <ci> y4 </ci>
                      </apply>
                    </apply>
                    <apply>
                      <power/>
                      <apply>
                        <minus/>
                        <ci> epsilon </ci>
                        <ci> y2 </ci>
                      </apply>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2.0 </cn>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <and/>
              <apply>
                <lt/>
                <ci> y2 </ci>
                <ci> epsilon </ci>
              </apply>
              <apply>
                <lt/>
                <apply>
                  <plus/>
                  <apply>
                    <times/>
                    <ci> a20 </ci>
                    <ci> y0 </ci>
                  </apply>
                  <apply>
                    <times/>
                    <ci> a21 </ci>
                    <ci> y1 </ci>
                  </apply>
                  <apply>
                    <times/>
                    <ci> a22 </ci>
                    <ci> y2 </ci>
                  </apply>
                  <apply>
                    <times/>
                    <ci> a23 </ci>
                    <ci> y3 </ci>
                  </apply>
                  <apply>
                    <times/>
                    <ci> a24 </ci>
                    <ci> y4 </ci>
                  </apply>
                </apply>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 0.0 </cn>
              </apply>
            </apply>
          </piece>
          <otherwise>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
          </otherwise>
        </piecewise>
      </apply>            
    </math>
  </component>
  
  <component cmeta:id="y3" name="y3">
      
    <variable cmeta:id="y3_y3" initial_value="0.95" name="y3" public_interface="out" units="dimensionless"/>
    
    <variable name="g3" units="dimensionless"/>
    <variable name="r3" units="dimensionless"/>
    <variable name="h3" units="dimensionless"/>
    <variable initial_value="0.010" name="S3" units="dimensionless"/>
    
    <variable name="y2" public_interface="in" units="dimensionless"/>
    <variable name="a32" public_interface="in" units="dimensionless"/>
    <variable name="a33" public_interface="in" units="dimensionless"/>
    <variable name="epsilon" public_interface="in" units="dimensionless"/>
    <variable name="time" public_interface="in" units="minute"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> y3 </ci> 
        </apply>
        <apply>
          <times/>
	      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="first_order_rate_constant"> 1.0 </cn>
	      <ci> g3 </ci>
		</apply>
      </apply>

      <apply>
        <eq/> 
        <ci> g3 </ci> 
        <apply>
          <times/>
          <ci> h3 </ci>
          <ci> r3 </ci>
        </apply>
      </apply>
          
      <apply>
        <eq/> 
        <ci> h3 </ci>   
        <piecewise>
          <piece>
            <apply>
              <divide/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> a32 </ci>
                  <ci> y2 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a33 </ci>
                  <ci> y3 </ci>
                </apply>
              </apply>
              <apply>
                <plus/>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
                <apply>
                  <times/>
                  <apply>
                    <divide/>
                    <apply>
                      <plus/>
                      <apply>
                        <times/>
                        <ci> a32 </ci>
                        <ci> y2 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a33 </ci>
                        <ci> y3 </ci>
                      </apply>
                    </apply>
                    <ci> S3 </ci>
                  </apply>
                  <apply>
                    <minus/>
                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
                    <apply>
                      <exp/>
                      <apply>
                        <minus/>
                        <apply>
                          <divide/>
                          <apply>
                            <plus/>
                            <apply>
                              <times/>
                              <ci> a32 </ci>
                              <ci> y2 </ci>
                            </apply>
                            <apply>
                              <times/>
                              <ci> a33 </ci>
                              <ci> y3 </ci>
                            </apply>
                          </apply>
                          <ci> S3 </ci>
                        </apply>
                      </apply>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <gt/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> a32 </ci>
                  <ci> y2 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a33 </ci>
                  <ci> y3 </ci>
                </apply>
              </apply>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 0.0 </cn>
            </apply>
          </piece>
          <piece>
            <apply>
              <plus/>
              <apply>
                <times/>
                <ci> a32 </ci>
                <ci> y2 </ci>
              </apply>
              <apply>
                <times/>
                <ci> a33 </ci>
                <ci> y3 </ci>
              </apply>
            </apply>
            <apply>
              <leq/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> a32 </ci>
                  <ci> y2 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a33 </ci>
                  <ci> y3 </ci>
                </apply>
              </apply>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 0.0 </cn>
            </apply>
          </piece>
        </piecewise>
      </apply>

      <apply>
        <eq/> 
        <ci> r3 </ci>   
        <piecewise>
          <piece>
            <apply>
              <minus/>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
              <apply>
                <exp/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci> S3 </ci>
                    <apply>
                      <power/>
                      <ci> y3 </ci>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2.0 </cn>
                    </apply>
                  </apply>
                  <apply>
                    <times/>
                    <apply>
                      <plus/>
                      <apply>
                        <times/>
                        <ci> a32 </ci>
                        <ci> y2 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a33 </ci>
                        <ci> y3 </ci>
                      </apply>
                    </apply>
                    <apply>
                      <power/>
                      <apply>
                        <minus/>
                        <ci> epsilon </ci>
                        <ci> y3 </ci>
                      </apply>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2.0 </cn>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <and/>
              <apply>
                <lt/>
                <ci> y3 </ci>
                <ci> epsilon </ci>
              </apply>
              <apply>
                <lt/>
                <apply>
                  <plus/>
                  <apply>
                    <times/>
                    <ci> a32 </ci>
                    <ci> y2 </ci>
                  </apply>
                  <apply>
                    <times/>
                    <ci> a33 </ci>
                    <ci> y3 </ci>
                  </apply>
                </apply>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 0.0 </cn>
              </apply>
            </apply>
          </piece>
          <otherwise>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
          </otherwise>
        </piecewise>
      </apply>        
    </math>
  </component>

  <component cmeta:id="y4" name="y4">
      
    <variable cmeta:id="y4_y4" initial_value="0.65" name="y4" public_interface="out" units="dimensionless"/>
    
    <variable name="g4" units="dimensionless"/>
    <variable name="r4" units="dimensionless"/>
    <variable name="h4" units="dimensionless"/>
    <variable initial_value="0.010" name="S4" units="dimensionless"/>
    
    <variable name="y2" public_interface="in" units="dimensionless"/>
    <variable name="a42" public_interface="in" units="dimensionless"/>
    <variable name="a44" public_interface="in" units="dimensionless"/>
    <variable name="epsilon" public_interface="in" units="dimensionless"/>
    <variable name="time" public_interface="in" units="minute"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> y4 </ci> 
        </apply>
        <apply>
          <times/>
	      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="first_order_rate_constant"> 1.0 </cn>
	      <ci> g4 </ci>
		</apply>
      </apply>

      <apply>
        <eq/> 
        <ci> g4 </ci> 
        <apply>
          <times/>
          <ci> h4 </ci>
          <ci> r4 </ci>
        </apply>
      </apply>
          
      <apply>
        <eq/> 
        <ci> h4 </ci>   
        <piecewise>
          <piece>
            <apply>
              <divide/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> a42 </ci>
                  <ci> y2 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a44 </ci>
                  <ci> y4 </ci>
                </apply>
              </apply>
              <apply>
                <plus/>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
                <apply>
                  <times/>
                  <apply>
                    <divide/>
                    <apply>
                      <plus/>
                      <apply>
                        <times/>
                        <ci> a42 </ci>
                        <ci> y2 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a44 </ci>
                        <ci> y4 </ci>
                      </apply>
                    </apply>
                    <ci> S4 </ci>
                  </apply>
                  <apply>
                    <minus/>
                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
                    <apply>
                      <exp/>
                      <apply>
                        <minus/>
                        <apply>
                          <divide/>
                          <apply>
                            <plus/>
                            <apply>
                              <times/>
                              <ci> a42 </ci>
                              <ci> y2 </ci>
                            </apply>
                            <apply>
                              <times/>
                              <ci> a44 </ci>
                              <ci> y4 </ci>
                            </apply>
                          </apply>
                          <ci> S4 </ci>
                        </apply>
                      </apply>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <gt/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> a42 </ci>
                  <ci> y2 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a44 </ci>
                  <ci> y4 </ci>
                </apply>
              </apply>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 0.0 </cn>
            </apply>
          </piece>
          <piece>
            <apply>
              <plus/>
              <apply>
                <times/>
                <ci> a42 </ci>
                <ci> y2 </ci>
              </apply>
              <apply>
                <times/>
                <ci> a44 </ci>
                <ci> y4 </ci>
              </apply>
            </apply>
            <apply>
              <leq/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> a42 </ci>
                  <ci> y2 </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> a44 </ci>
                  <ci> y4 </ci>
                </apply>
              </apply>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 0.0 </cn>
            </apply>
          </piece>
        </piecewise>
      </apply>

      <apply>
        <eq/> 
        <ci> r4 </ci>   
        <piecewise>
          <piece>
            <apply>
              <minus/>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
              <apply>
                <exp/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci> S4 </ci>
                    <apply>
                      <power/>
                      <ci> y4 </ci>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2.0 </cn>
                    </apply>
                  </apply>
                  <apply>
                    <times/>
                    <apply>
                      <plus/>
                      <apply>
                        <times/>
                        <ci> a42 </ci>
                        <ci> y2 </ci>
                      </apply>
                      <apply>
                        <times/>
                        <ci> a44 </ci>
                        <ci> y4 </ci>
                      </apply>
                    </apply>
                    <apply>
                      <power/>
                      <apply>
                        <minus/>
                        <ci> epsilon </ci>
                        <ci> y4 </ci>
                      </apply>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2.0 </cn>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <and/>
              <apply>
                <lt/>
                <ci> y4 </ci>
                <ci> epsilon </ci>
              </apply>
              <apply>
                <lt/>
                <apply>
                  <plus/>
                  <apply>
                    <times/>
                    <ci> a42 </ci>
                    <ci> y2 </ci>
                  </apply>
                  <apply>
                    <times/>
                    <ci> a44 </ci>
                    <ci> y4 </ci>
                  </apply>
                </apply>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 0.0 </cn>
              </apply>
            </apply>
          </piece>
          <otherwise>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
          </otherwise>
        </piecewise>
      </apply>        
    </math>
  </component>

  <component name="model_parameters"> 
    <variable initial_value="-0.00843" name="a00" public_interface="out" units="dimensionless"/>
    <variable initial_value="-0.440" name="a02" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.082" name="a10" public_interface="out" units="dimensionless"/>
    <variable initial_value="-0.0040" name="a11" public_interface="out" units="dimensionless"/>
    <variable initial_value="-0.0668" name="a12" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.0" name="a20" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.0310" name="a21" public_interface="out" units="dimensionless"/>
    <variable initial_value="-0.0957" name="a22" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.0576" name="a23" public_interface="out" units="dimensionless"/>
    <variable initial_value="3.25E-4" name="a24" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.00869" name="a32" public_interface="out" units="dimensionless"/>
    <variable initial_value="-0.00857" name="a33" public_interface="out" units="dimensionless"/>
    <variable initial_value="1.39E-4" name="a42" public_interface="out" units="dimensionless"/>
    <variable initial_value="-1.43E-4" name="a44" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.443" name="c0" public_interface="out" units="first_order_rate_constant"/>
    <variable initial_value="0.0" name="e0" public_interface="out" units="first_order_rate_constant"/>
    <variable initial_value="0.0" name="e1" public_interface="out" units="first_order_rate_constant"/>
    <variable initial_value="0.0" name="e2" public_interface="out" units="first_order_rate_constant"/>
    <variable initial_value="0.50" name="epsilon" public_interface="out" units="dimensionless"/>
  </component>
  
  <connection>
    <map_components component_1="y0" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="y1" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>

  <connection>
    <map_components component_1="y2" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="y3" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>

  <connection>
    <map_components component_1="y4" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="y0" component_2="y2"/>
    <map_variables variable_1="y0" variable_2="y0"/>
    <map_variables variable_1="y2" variable_2="y2"/>
  </connection> 

  <connection>
    <map_components component_1="y0" component_2="y1"/>
    <map_variables variable_1="y0" variable_2="y0"/>
  </connection>

  <connection>
    <map_components component_1="y0" component_2="model_parameters"/>
    <map_variables variable_1="a00" variable_2="a00"/>
    <map_variables variable_1="a02" variable_2="a02"/>
    <map_variables variable_1="c0" variable_2="c0"/>
    <map_variables variable_1="e0" variable_2="e0"/>
    <map_variables variable_1="epsilon" variable_2="epsilon"/>
  </connection>

  <connection>
    <map_components component_1="y1" component_2="y2"/>
    <map_variables variable_1="y1" variable_2="y1"/>
    <map_variables variable_1="y2" variable_2="y2"/>
  </connection> 

  <connection>
    <map_components component_1="y1" component_2="model_parameters"/>
    <map_variables variable_1="a10" variable_2="a10"/>
    <map_variables variable_1="a12" variable_2="a12"/>
    <map_variables variable_1="a11" variable_2="a11"/>
    <map_variables variable_1="e1" variable_2="e1"/>
    <map_variables variable_1="epsilon" variable_2="epsilon"/>
  </connection>

  <connection>
    <map_components component_1="y3" component_2="y2"/>
    <map_variables variable_1="y3" variable_2="y3"/>
    <map_variables variable_1="y2" variable_2="y2"/>
  </connection>

  <connection>
    <map_components component_1="y4" component_2="y2"/>
    <map_variables variable_1="y4" variable_2="y4"/>
    <map_variables variable_1="y2" variable_2="y2"/>
  </connection>  

  <connection>
    <map_components component_1="y2" component_2="model_parameters"/>
    <map_variables variable_1="a20" variable_2="a20"/>
    <map_variables variable_1="a22" variable_2="a22"/>
    <map_variables variable_1="a21" variable_2="a21"/>
    <map_variables variable_1="a23" variable_2="a23"/>
    <map_variables variable_1="a24" variable_2="a24"/>
    <map_variables variable_1="e2" variable_2="e2"/>
    <map_variables variable_1="epsilon" variable_2="epsilon"/>
  </connection>

  <connection>
    <map_components component_1="y3" component_2="model_parameters"/>
    <map_variables variable_1="a32" variable_2="a32"/>
    <map_variables variable_1="a33" variable_2="a33"/>
    <map_variables variable_1="epsilon" variable_2="epsilon"/>
  </connection>

  <connection>
    <map_components component_1="y4" component_2="model_parameters"/>
    <map_variables variable_1="a42" variable_2="a42"/>
    <map_variables variable_1="a44" variable_2="a44"/>
    <map_variables variable_1="epsilon" variable_2="epsilon"/>
  </connection>


<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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<rdf:Description rdf:about="rdf:#9f2bbe52-4593-4a53-a55f-c93cefedc023">
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<Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">16366221</Pubmed_id>
</rdf:Description>
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<rdf:Description rdf:about="rdf:#db593a92-1f53-4d3a-831e-4cf25b8a1aef">
<rdf:value xml:lang="en">This is a CellML description of Kyrylov et al's 2005 mathematical model of oscillatory behaviour of the hypothalamic-pituitary-adrenal axis.</rdf:value>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#42924936-cce4-4e50-8f67-17c98151efdf"/>
</creator>
</rdf:Description>
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<rdf:Description rdf:about="#kyrylov_model_2005">
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<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
        Kyrylov et al's 2005 mathematical model of oscillatory behaviour of the hypothalamic-pituitary-adrenal axis.
      </title></rdf:Description>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</rdf:RDF></model>