<?xml version="1.0"?>
<!--
This CellML file was generated on 23/03/2010 at 3:09:57 at p.m. using:

COR (0.9.31.1207)
Copyright 2002-2010 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="potter_model_2005" name="potter_model_2005">

	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Response to continuous and pulsatile PTH dosing: a mathematical model for parathyroid hormone receptor kinetics</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
        This CellML version of the model has been checked in COR and OpenCell.  The units have been checked and are correct and are consistent.  The model runs in COR and Opencell to it recreate the published results. This model recreates continuous PTH dosing model using low doses.</para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: In this paper, we propose a mathematical model for parathyroid hormone receptor (PTH1R) kinetics, focusing on the receptor's response to PTH dosing to discern bone formation responses from bone resorption. The PTH1R is a major target for new osteoporosis treatments, as pulsatile PTH dosing has been shown to induce net bone formation in both animals and humans, and PTH(1-34) was recently FDA approved for the treatment of post-menopausal osteoporosis. PTH has also been shown to cause net bone loss when given continuously, so that the net action of PTH on bone is dependent on the dosing pattern. We have developed a simplified two-state receptor kinetics model for the PTH1R, based on the concepts of Segel et al., to distinguish the activity of active and inactive receptor and receptor-ligand complexes. The goal is to develop a plausible model of the minimal essential biological relationships necessary for understanding the responses to PTH dosing. A two-state model is able to effectively discriminate between continuous and pulsatile PTH dosing using the active species as surrogates for the downstream anabolic response. For continuous PTH dosing, the model predicts a desensitized system dominated by the inactive receptor and complex, consistent with downstream net bone loss that has been demonstrated experimentally. Using pulsatile PTH dosing, the model system predicts a highly sensitized state dominated by the active receptor and complex, corresponding to net bone formation. These results are consistent with the hypothesis that the kinetics of the receptor plays a critical role in the downstream effects of PTH dosing. Moreover, these results indicate that within a range of biologically relevant PTH doses, the two-state model is able to capture the differential behavior of the system for both continuous and pulsatile PTH dosing. The development of such a model provides a rational basis for developing more biologically extensive models that may support the design of optimal dosing strategies for PTH-based anti-osteoporosis treatments. Moreover, this model provides a unique starting point from which to design experiments investigating PTH receptor biology.
</para>
				
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>model diagram</title>
							</objectinfo>
							<imagedata fileref="potter_2005.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of the two-state model for PTHR1 binding kinetics  PTH is secreted and/or dosed at a rate D and binds to the active (Ra) and inactive (Ri) forms of the receptor.  PTH-PTHR1 binding results in the formation of the active (Ca) and inactive (Ci) complexes.  In addition, there is a conversion between the active and inactive forms of the receptor and complexes, while unbound PTH is cleared from the system.</caption>
				</informalfigure>
				
				<para>
The original paper reference is cited below:
</para>
				<para>
Response to continuous and pulsatile PTH dosing: a mathematical model for parathyroid hormone receptor kinetics, Laura K. Potter, Larry D. Greller, Carolyn R. Cho, Mark E. Nuttall, George B. Stroup, Larry J. Suva, and Frank L. Tobin, 2005, <emphasis>Bone</emphasis>, 37, 159-169.  <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/15921971">PubMed ID: 15921971</ulink>
				</para>
				
			</sect1>
		</article>
	</documentation>
	
	
	
	
	
	
	
	   
	
   <units name="hour">
      <unit multiplier="3600" units="second"/>
   </units>
   <units name="picomolar">
      <unit prefix="pico" units="mole"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="flux">
      <unit units="picomolar"/>
      <unit exponent="-1" units="second"/>
   </units>
   <units name="first_order_rate_constant">
      <unit exponent="-1" units="second"/>
   </units>
   <units name="second_order_rate_constant">
      <unit exponent="-1" units="picomolar"/>
      <unit exponent="-1" units="second"/>
   </units>
   
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="second"/>
   </component>
   
   <component name="P">
      <variable initial_value="3" name="P" public_interface="out" units="picomolar"/>
      <variable name="k1" public_interface="in" units="second_order_rate_constant"/>
      <variable name="k1_" public_interface="in" units="first_order_rate_constant"/>
      <variable name="k2" public_interface="in" units="second_order_rate_constant"/>
      <variable name="k2_" public_interface="in" units="first_order_rate_constant"/>
      <variable name="kcl" public_interface="in" units="first_order_rate_constant"/>
      <variable name="D" public_interface="in" units="flux"/>
      <variable name="Ca" public_interface="in" units="picomolar"/>
      <variable name="Ci" public_interface="in" units="picomolar"/>
      <variable name="Ra" public_interface="in" units="picomolar"/>
      <variable name="Ri" public_interface="in" units="picomolar"/>
      <variable name="time" public_interface="in" units="second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>P</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>k1_</ci>
                     <ci>Ca</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k2_</ci>
                     <ci>Ci</ci>
                  </apply>
                  <ci>D</ci>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>k1</ci>
                     <ci>Ra</ci>
                     <ci>P</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k2</ci>
                     <ci>Ri</ci>
                     <ci>P</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kcl</ci>
                     <ci>P</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Ra">
      <variable cmeta:id="Ra_Ra" initial_value="16.9" name="Ra" public_interface="out" units="picomolar"/>
      <variable name="k1" public_interface="in" units="second_order_rate_constant"/>
      <variable name="k1_" public_interface="in" units="first_order_rate_constant"/>
      <variable name="k3" public_interface="in" units="first_order_rate_constant"/>
      <variable name="k3_" public_interface="in" units="first_order_rate_constant"/>
      <variable name="Ca" public_interface="in" units="picomolar"/>
      <variable name="P" public_interface="in" units="picomolar"/>
      <variable name="Ri" public_interface="in" units="picomolar"/>
      <variable name="time" public_interface="in" units="second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Ra</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>k1_</ci>
                     <ci>Ca</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k3</ci>
                     <ci>Ri</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>k1</ci>
                     <ci>Ra</ci>
                     <ci>P</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k3_</ci>
                     <ci>Ra</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Ri">
      <variable cmeta:id="Ri_Ri" initial_value="1.7" name="Ri" public_interface="out" units="picomolar"/>
      <variable name="k2" public_interface="in" units="second_order_rate_constant"/>
      <variable name="k2_" public_interface="in" units="first_order_rate_constant"/>
      <variable name="k3" public_interface="in" units="first_order_rate_constant"/>
      <variable name="k3_" public_interface="in" units="first_order_rate_constant"/>
      <variable name="Ci" public_interface="in" units="picomolar"/>
      <variable name="P" public_interface="in" units="picomolar"/>
      <variable name="Ra" public_interface="in" units="picomolar"/>
      <variable name="time" public_interface="in" units="second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Ri</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>k2_</ci>
                     <ci>Ci</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k3_</ci>
                     <ci>Ra</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>k2</ci>
                     <ci>Ri</ci>
                     <ci>P</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k3</ci>
                     <ci>Ri</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Ca">
      <variable cmeta:id="Ca_Ca" initial_value="4e-4" name="Ca" public_interface="out" units="picomolar"/>
      <variable name="k1" public_interface="in" units="second_order_rate_constant"/>
      <variable name="k1_" public_interface="in" units="first_order_rate_constant"/>
      <variable name="k4" public_interface="in" units="first_order_rate_constant"/>
      <variable name="k4_" public_interface="in" units="first_order_rate_constant"/>
      <variable name="Ci" public_interface="in" units="picomolar"/>
      <variable name="P" public_interface="in" units="picomolar"/>
      <variable name="Ra" public_interface="in" units="picomolar"/>
      <variable name="time" public_interface="in" units="second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Ca</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>k1</ci>
                     <ci>Ra</ci>
                     <ci>P</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k4</ci>
                     <ci>Ci</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>k1_</ci>
                     <ci>Ca</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k4_</ci>
                     <ci>Ca</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Ci">
      <variable cmeta:id="Ci_Ci" initial_value="0.05" name="Ci" public_interface="out" units="picomolar"/>
      <variable name="k2" public_interface="in" units="second_order_rate_constant"/>
      <variable name="k2_" public_interface="in" units="first_order_rate_constant"/>
      <variable name="k4" public_interface="in" units="first_order_rate_constant"/>
      <variable name="k4_" public_interface="in" units="first_order_rate_constant"/>
      <variable name="Ca" public_interface="in" units="picomolar"/>
      <variable name="P" public_interface="in" units="picomolar"/>
      <variable name="Ri" public_interface="in" units="picomolar"/>
      <variable name="time" public_interface="in" units="second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Ci</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>k2</ci>
                     <ci>Ri</ci>
                     <ci>P</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k4_</ci>
                     <ci>Ca</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>k2_</ci>
                     <ci>Ci</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k4</ci>
                     <ci>Ci</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="rho">
      <variable name="rho" units="dimensionless"/>
      <variable name="Ca" public_interface="in" units="picomolar"/>
      <variable name="Ci" public_interface="in" units="picomolar"/>
      <variable name="P" public_interface="in" units="picomolar"/>
      <variable name="Ra" public_interface="in" units="picomolar"/>
      <variable name="Ri" public_interface="in" units="picomolar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>rho</ci>
            <apply>
               <divide/>
               <apply>
                  <plus/>
                  <ci>Ra</ci>
                  <ci>Ca</ci>
               </apply>
               <apply>
                  <plus/>
                  <ci>Ra</ci>
                  <ci>Ca</ci>
                  <ci>Ri</ci>
                  <ci>Ci</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="model_parameters">
      <variable cmeta:id="model_parameters_k1" initial_value="1e-6" name="k1" public_interface="out" units="second_order_rate_constant"/>
      <variable cmeta:id="model_parameters_k1_" initial_value="1e-3" name="k1_" public_interface="out" units="first_order_rate_constant"/>
      <variable cmeta:id="model_parameters_k2" initial_value="1e-7" name="k2" public_interface="out" units="second_order_rate_constant"/>
      <variable cmeta:id="model_parameters_k2_" initial_value="1e-3" name="k2_" public_interface="out" units="first_order_rate_constant"/>
      <variable cmeta:id="model_parameters_k3" initial_value="1e-3" name="k3" public_interface="out" units="first_order_rate_constant"/>
      <variable cmeta:id="model_parameters_k3_" initial_value="1e-4" name="k3_" public_interface="out" units="first_order_rate_constant"/>
      <variable cmeta:id="model_parameters_k4" initial_value="2e-3" name="k4" public_interface="out" units="first_order_rate_constant"/>
      <variable cmeta:id="model_parameters_k4_" initial_value="0.4" name="k4_" public_interface="out" units="first_order_rate_constant"/>
      <variable cmeta:id="model_parameters_kcl" initial_value="5e-3" name="kcl" public_interface="out" units="first_order_rate_constant"/>
      <variable name="D" public_interface="out" units="flux"/>
      <variable initial_value="0" name="De" units="flux"/>
      <variable initial_value="0.015" name="Dd" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>D</ci>
            <apply>
               <plus/>
               <ci>De</ci>
               <ci>Dd</ci>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="P" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="Ra" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="Ri" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="Ca" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="Ci" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="Ra" component_2="P"/>
      <map_variables variable_1="P" variable_2="P"/>
      <map_variables variable_1="Ra" variable_2="Ra"/>
   </connection>
   <connection>
      <map_components component_1="Ri" component_2="P"/>
      <map_variables variable_1="P" variable_2="P"/>
      <map_variables variable_1="Ri" variable_2="Ri"/>
   </connection>
   <connection>
      <map_components component_1="Ca" component_2="P"/>
      <map_variables variable_1="P" variable_2="P"/>
      <map_variables variable_1="Ca" variable_2="Ca"/>
   </connection>
   <connection>
      <map_components component_1="Ci" component_2="P"/>
      <map_variables variable_1="P" variable_2="P"/>
      <map_variables variable_1="Ci" variable_2="Ci"/>
   </connection>
   <connection>
      <map_components component_1="P" component_2="model_parameters"/>
      <map_variables variable_1="k1" variable_2="k1"/>
      <map_variables variable_1="k1_" variable_2="k1_"/>
      <map_variables variable_1="k2" variable_2="k2"/>
      <map_variables variable_1="k2_" variable_2="k2_"/>
      <map_variables variable_1="kcl" variable_2="kcl"/>
      <map_variables variable_1="D" variable_2="D"/>
   </connection>
   <connection>
      <map_components component_1="Ca" component_2="Ra"/>
      <map_variables variable_1="Ra" variable_2="Ra"/>
      <map_variables variable_1="Ca" variable_2="Ca"/>
   </connection>
   <connection>
      <map_components component_1="Ri" component_2="Ra"/>
      <map_variables variable_1="Ra" variable_2="Ra"/>
      <map_variables variable_1="Ri" variable_2="Ri"/>
   </connection>
   <connection>
      <map_components component_1="Ra" component_2="model_parameters"/>
      <map_variables variable_1="k1" variable_2="k1"/>
      <map_variables variable_1="k1_" variable_2="k1_"/>
      <map_variables variable_1="k3" variable_2="k3"/>
      <map_variables variable_1="k3_" variable_2="k3_"/>
   </connection>
   <connection>
      <map_components component_1="Ci" component_2="Ri"/>
      <map_variables variable_1="Ri" variable_2="Ri"/>
      <map_variables variable_1="Ci" variable_2="Ci"/>
   </connection>
   <connection>
      <map_components component_1="Ri" component_2="model_parameters"/>
      <map_variables variable_1="k2" variable_2="k2"/>
      <map_variables variable_1="k2_" variable_2="k2_"/>
      <map_variables variable_1="k3" variable_2="k3"/>
      <map_variables variable_1="k3_" variable_2="k3_"/>
   </connection>
   <connection>
      <map_components component_1="Ca" component_2="Ci"/>
      <map_variables variable_1="Ci" variable_2="Ci"/>
      <map_variables variable_1="Ca" variable_2="Ca"/>
   </connection>
   <connection>
      <map_components component_1="Ca" component_2="model_parameters"/>
      <map_variables variable_1="k1" variable_2="k1"/>
      <map_variables variable_1="k1_" variable_2="k1_"/>
      <map_variables variable_1="k4" variable_2="k4"/>
      <map_variables variable_1="k4_" variable_2="k4_"/>
   </connection>
   <connection>
      <map_components component_1="Ci" component_2="model_parameters"/>
      <map_variables variable_1="k2" variable_2="k2"/>
      <map_variables variable_1="k2_" variable_2="k2_"/>
      <map_variables variable_1="k4" variable_2="k4"/>
      <map_variables variable_1="k4_" variable_2="k4_"/>
   </connection>
   <connection>
      <map_components component_1="rho" component_2="P"/>
      <map_variables variable_1="P" variable_2="P"/>
   </connection>
   <connection>
      <map_components component_1="rho" component_2="Ca"/>
      <map_variables variable_1="Ca" variable_2="Ca"/>
   </connection>
   <connection>
      <map_components component_1="rho" component_2="Ci"/>
      <map_variables variable_1="Ci" variable_2="Ci"/>
   </connection>
   <connection>
      <map_components component_1="rho" component_2="Ra"/>
      <map_variables variable_1="Ra" variable_2="Ra"/>
   </connection>
   <connection>
      <map_components component_1="rho" component_2="Ri"/>
      <map_variables variable_1="Ri" variable_2="Ri"/>
   </connection>

   <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"><rdf:Description rdf:about="rdf:#842e34b5-6cce-417c-9608-13a360a3721b"><rdf:type><rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/></rdf:type><rdf:value xml:lang="en">c.lloyd@auckland.ac.nz</rdf:value></rdf:Description><rdf:Description rdf:about="rdf:#875e03e4-fd66-4041-9b32-e19c0bbd1369"><FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine Lloyd</FN></rdf:Description><rdf:Description rdf:about="#rho"><title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">rho</title><alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">fraction of PTH1R in the active state</alternative></rdf:Description><rdf:Description rdf:about="#potter_model_2005"><title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
        Potter et al's 2005 mathematical model for parathyroid hormone receptor kinetics.
      </title>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#29c00010-8801-4c55-8eb3-32d418db110a"/>
</reference>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#b845eb18-3c70-4e7f-8357-2e0cc8c99f1c"/>
</reference>
<cmeta:comment>
<rdf:Description rdf:about="rdf:#2039b36e-be54-4756-a289-071c4473021e"/>
</cmeta:comment>
<simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n1"/>
</simulation>
</rdf:Description>
<rdf:Description rdf:about="rdf:#a6cf7c1e-fbb3-481d-b3f8-8ae5d40c1e3e">
<Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Auckland Bioengineering Institute</Orgunit>
<Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The University of Auckland</Orgname>
</rdf:Description>
<rdf:Description rdf:about="rdf:#15ea001b-8e94-4d85-bdbc-bbbd1e8755a7">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2007-07-23T00:00:00+00:00</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#9066cf89-9f12-48f6-826a-951fa4c84197">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Potter</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">K</Other>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Laura</Given>
</rdf:Description>
<rdf:Description rdf:about="rdf:#2039b36e-be54-4756-a289-071c4473021e">
<rdf:value xml:lang="en">This is a CellML description of Potter et al's 2005 mathematical model for parathyroid hormone receptor kinetics.</rdf:value>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#875e03e4-fd66-4041-9b32-e19c0bbd1369"/>
</creator>
</rdf:Description>
<rdf:Description rdf:nodeID="n2">
<rdf:rest>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
</rdf:rest>
<rdf:first>
<rdf:Description rdf:nodeID="n3"/>
</rdf:first>
</rdf:Description>
<rdf:Description rdf:about="#Ri">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Ri</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">inactive parathyroid hormone Type 1 receptor</alternative>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">inactive PTH1R</alternative>
</rdf:Description>
<rdf:Description rdf:about="#Ca">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Ca</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">active parathyroid hormone-parathyroid hormone Type 1 receptor</alternative>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">active PTH-PTH1R complex</alternative>
</rdf:Description>
<rdf:Description rdf:about="rdf:#51fae69b-bef0-4aa9-8bc5-fc60ede582bb">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#9066cf89-9f12-48f6-826a-951fa4c84197"/>
</N>
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:nodeID="n3">
<maximumStepSize xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">10</maximumStepSize>
<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">8000</endingValue>
<pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">100000</pointDensity>
</rdf:Description>
<rdf:Description rdf:about="rdf:#29c00010-8801-4c55-8eb3-32d418db110a">
<subject xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#a9c2a7d9-3251-4e65-adac-c2c58cc8b351"/>
</subject>
</rdf:Description>
<rdf:Description rdf:nodeID="n1">
<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n2"/>
</boundIntervals>
</rdf:Description>
<rdf:Description rdf:about="rdf:#abbe54c0-49f9-4eb5-9f92-9380347b75e0">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Greller</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">D</Other>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Larry</Given>
</rdf:Description>
<rdf:Description rdf:about="rdf:#522b5fc1-12ed-40f2-b274-94380706d65b">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Stroup</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">B</Other>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">George</Given>
</rdf:Description>
<rdf:Description rdf:about="rdf:#02e28990-a66c-4099-a176-4ed3b1e88497">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Tobin</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">L</Other>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Frank</Given>
</rdf:Description>
<rdf:Description rdf:about="rdf:#33d298c1-94ca-4a67-b241-3df674e67466">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#02e28990-a66c-4099-a176-4ed3b1e88497"/>
</N>
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#e667b297-f965-440b-b176-632968fad030">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lloyd</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">May</Other>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine</Given>
</rdf:Description>
<rdf:Description rdf:about="rdf:#538ba590-77a7-459f-8618-e29fb6ead251">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
</rdf:type>
<rdf:_3>
<rdf:Description rdf:about="rdf:#a9843781-99fb-4e8c-9319-08a028a4de76"/>
</rdf:_3>
<rdf:_4>
<rdf:Description rdf:about="rdf:#e434a309-3b2a-4cfb-8f56-19fe1c12ca6e"/>
</rdf:_4>
<rdf:_2>
<rdf:Description rdf:about="rdf:#ff1bc6f6-8d7f-4ced-9292-51dc37417bd7"/>
</rdf:_2>
<rdf:_1>
<rdf:Description rdf:about="rdf:#51fae69b-bef0-4aa9-8bc5-fc60ede582bb"/>
</rdf:_1>
<rdf:_6>
<rdf:Description rdf:about="rdf:#76df011e-c390-4cc6-946f-cf70c87f2584"/>
</rdf:_6>
<rdf:_7>
<rdf:Description rdf:about="rdf:#33d298c1-94ca-4a67-b241-3df674e67466"/>
</rdf:_7>
<rdf:_5>
<rdf:Description rdf:about="rdf:#bd8f3f96-d59d-4336-8174-35ed3961ff02"/>
</rdf:_5>
</rdf:Description>
<rdf:Description rdf:about="rdf:#e434a309-3b2a-4cfb-8f56-19fe1c12ca6e">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#02f21243-2ebe-4ad0-80df-b4fc4113f930"/>
</N>
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#a9843781-99fb-4e8c-9319-08a028a4de76">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#65af3c19-8e1e-4f86-ae54-ee9604f3e065"/>
</N>
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#ff1bc6f6-8d7f-4ced-9292-51dc37417bd7">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#abbe54c0-49f9-4eb5-9f92-9380347b75e0"/>
</N>
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#02f21243-2ebe-4ad0-80df-b4fc4113f930">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Nuttall</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">E</Other>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Mark</Given>
</rdf:Description>
<rdf:Description rdf:about="rdf:#76718c80-09bc-4978-aaa4-bc12279dbae4">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Bone</title>
</rdf:Description>
<rdf:Description rdf:about="#Ra">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Ra</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">active PTH1R</alternative>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">active parathyroid hormone Type 1 receptor</alternative>
</rdf:Description>
<rdf:Description rdf:about="rdf:#0de6dbcd-2d16-4312-bd6e-806649eee6f7">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Suva</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">J</Other>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Larry</Given>
</rdf:Description>
<rdf:Description rdf:about="#P">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">P</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">parathyroid hormone</alternative>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">PTH</alternative>
</rdf:Description>
<rdf:Description rdf:about="rdf:#b050c927-15d4-4342-9a16-95cceda067c0">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#e667b297-f965-440b-b176-632968fad030"/>
</N>
<ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#a6cf7c1e-fbb3-481d-b3f8-8ae5d40c1e3e"/>
</ORG>
<EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#842e34b5-6cce-417c-9608-13a360a3721b"/>
</EMAIL>
</rdf:Description>
<rdf:Description rdf:about="rdf:#e2e4e4cb-ff27-4aaf-b154-7bc9e8ccc10b">
<rdf:value xml:lang="en"/>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#67d2ddeb-e74e-465e-aaa7-3b91c7baa55b"/>
</creator>
</rdf:Description>
<rdf:Description rdf:about="rdf:#a6198dfd-5c18-443a-98c0-4f702b4b14a8">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/>
</rdf:type>
<rdf:_3 xml:lang="en">parathyroid hormone receptor</rdf:_3>
<rdf:_4 xml:lang="en">osteoporosis</rdf:_4>
<rdf:_2 xml:lang="en">parathyroid hormone</rdf:_2>
<rdf:_1 xml:lang="en">endocrine</rdf:_1>
</rdf:Description>
<rdf:Description rdf:about="rdf:#67d2ddeb-e74e-465e-aaa7-3b91c7baa55b">
<FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en"/>
</rdf:Description>
<rdf:Description rdf:about="#Ci">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Ci</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">inactive parathyroid hormone-parathyroid hormone Type 1 receptor</alternative>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">inactive PTH-PTH1R complex</alternative>
</rdf:Description>
<rdf:Description rdf:about="rdf:#684b35ff-660e-4116-b99f-3f61927cf031">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Response to continuous and pulsatile PTH dosing: a mathematical model for parathyroid hormone receptor kinetics</title>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#538ba590-77a7-459f-8618-e29fb6ead251"/>
</creator>
<volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">37</volume>
<last_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">169</last_page>
<Journal xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#76718c80-09bc-4978-aaa4-bc12279dbae4"/>
</Journal>
<first_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">159</first_page>
<issued xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#94293cf0-b171-4cba-b4fb-a06e79454ce0"/>
</issued>
</rdf:Description>
<rdf:Description rdf:about="">
	  <dc:title>This model recreates continuous PTH dosing model using low doses</dc:title>
	  
	  <publisher xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">The University of Auckland, Auckland Bioengineering Institute</publisher><created xmlns="http://purl.org/dc/terms/"><rdf:Description rdf:about="rdf:#15ea001b-8e94-4d85-bdbc-bbbd1e8755a7"/></created><creator xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:about="rdf:#b050c927-15d4-4342-9a16-95cceda067c0"/></creator><cmeta:comment><rdf:Description rdf:about="rdf:#e2e4e4cb-ff27-4aaf-b154-7bc9e8ccc10b"/></cmeta:comment></rdf:Description><rdf:Description rdf:about="rdf:#b845eb18-3c70-4e7f-8357-2e0cc8c99f1c"><JournalArticle xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:about="rdf:#684b35ff-660e-4116-b99f-3f61927cf031"/></JournalArticle><Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">15921971</Pubmed_id></rdf:Description><rdf:Description rdf:about="rdf:#76df011e-c390-4cc6-946f-cf70c87f2584"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:about="rdf:#0de6dbcd-2d16-4312-bd6e-806649eee6f7"/></N><rdf:type><rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/></rdf:type></rdf:Description><rdf:Description rdf:about="rdf:#a9c2a7d9-3251-4e65-adac-c2c58cc8b351"><subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type><rdf:value><rdf:Description rdf:about="rdf:#a6198dfd-5c18-443a-98c0-4f702b4b14a8"/></rdf:value></rdf:Description><rdf:Description rdf:about="rdf:#65af3c19-8e1e-4f86-ae54-ee9604f3e065"><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Cho</Family><Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">R</Other><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Carolyn</Given></rdf:Description><rdf:Description rdf:about="rdf:#94293cf0-b171-4cba-b4fb-a06e79454ce0"><W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2005-08-00 00:00</W3CDTF></rdf:Description><rdf:Description rdf:about="rdf:#bd8f3f96-d59d-4336-8174-35ed3961ff02"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:about="rdf:#522b5fc1-12ed-40f2-b274-94380706d65b"/></N><rdf:type><rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/></rdf:type></rdf:Description></rdf:RDF></model>