//   FILE :  potter_model_2006.xml
//
// CREATED :  22nd June 2007
//
// LAST MODIFIED : 22nd June 2007
//
// AUTHOR :  Catherine Lloyd
//           Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.1 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Potter et al.'s 2006 mathematical model for the androgenic regulation of the prostate.
//
// CHANGES:
// publisher: The University of Auckland, Auckland Bioengineering Institute
// created: W3CDTF 2007-06-22T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: Potter et al.'s 2006 mathematical model for the androgenic regulation of the prostate.
// bio_entity: prostate
// comment: FN Catherine Lloyd; This is the CellML description of Potter et al.'s 2006 mathematical model for the androgenic regulation of the prostate.
// reference: subject_type keyword; testosterone; testes; endocrine; Leydig cells; leydig cells; prostate
// reference: Pubmed_id 16757547; Given Laura; Family Potter; Other K; Given Michael; Family Zager; Other G; Given Hugh; Family Barton; Other A; title Mathematical model for the androgenic regulation of the prostate in intact and castrated adult male rats.; volume 291; first_page E952; title American Journal of Physiology: Endocrinology and Metabolism; W3CDTF 2006; last_page E964
def model potter_model_2006 as
  // Modelling Androgenic Prostate Regulation
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML version of the model has been checked in COR and PCEnv. The units have been checked and are correct and are consistent. The model runs in PCEnv, COR and Opencell but does not recreate the published results. Equation 29 has been fixed with the help of the model author.
  //
  // Model Structure
  //
  // Abstract: The testicular-hypothalamic-pituitary axis regulates male reproductive system functions. Understanding these regulatory mechanisms is important for assessing the reproductive effects of environmental and pharmaceutical androgenic and antiandrogenic compounds. A mathematical model for the dynamics of androgenic synthesis, transport, metabolism, and regulation of the adult rodent ventral prostate was developed on the basis of a model by Barton and Anderson (1997). The model describes the systemic and local kinetics of testosterone (T), 5{alpha}-dihydrotestosterone (DHT), and luteinizing hormone (LH), with metabolism of T to DHT by 5{alpha}-reductase in liver and prostate. Also included are feedback loops for the positive regulation of T synthesis by LH and negative regulation of LH by T and DHT. The model simulates maintenance of the prostate as a function of hormone concentrations and androgen receptor (AR)-mediated signal transduction. The regulatory processes involved in prostate size and function include cell proliferation, apoptosis, fluid production, and 5{alpha}-reductase activity. Each process is controlled through the occupancy of a representative gene by androgen-AR dimers. The model simulates prostate dynamics for intact, castrated, and intravenous T-injected rats. After calibration, the model accurately captures the castration-induced regression of the prostate compared with experimental data that show that the prostate regresses to ~17 and 5% of its intact weight at 14 and 30 days postcastration, respectively. The model also accurately predicts serum T and AR levels following castration compared with data. This model provides a framework for quantifying the kinetics and effects of environmental and pharmaceutical endocrine active compounds on the prostate.
  //
  // model diagram
  //
  // Model schema for testosterone (T) and 5alpha-dihydrotestosterone (DHT) kinetics. Arrows represent blood flow between tissue compartments, substrate metabolism, and clearance (as labelled). T synthesis occurs in the blood and in testicular Leydig cells (LC), with androgen binding to albumin in the blood and to androgen receptor (AR) in the prostate. The testes compartment can be further broken down into spermatic cord venous blood (SV), testicular venous blood (TV), interstitial fluid (IF), and seminiferous tubules (ST). Androgenic regulation in the prostate is highlighted. T is converted to DHT, and either T or DHT can bind to the AR and form homogeneous or heterogeneous dimers (this diagram is only showing DHT binding, not T binding). AR-mediated DNA transcription leads to enhanced cell proliferation and conversion of T to DHT, and inhibition of cell apoptosis.
  //
  // The complete original paper reference is cited below:
  //
  // Mathematical model for the androgenic regulation of the prostate in intact and castrated adult male rats, Laura K. Potter, Michael G. Zager, and Hugh A. Barton, 2006, American Journal of Physiology: Endocrinology and Metabolism, volume 291, E952-E964. PubMed ID: 16757547 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=16757547&query_hl=1&itool=pubmed_docsum)
  def unit nM as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit nanomole as
    unit mole {pref: nano};
  enddef;
  def unit ng_ml as
    unit gram {pref: nano};
    unit litre {pref: milli, expo: -1};
  enddef;
  def unit hour as
    unit second {mult: 3600.0};
  enddef;
  def unit l_hr as
    unit litre;
    unit hour {expo: -1};
  enddef;
  def unit nmol_hr as
    unit nanomole;
    unit hour {expo: -1};
  enddef;
  def unit kg as
    unit kilogram;
  enddef;
  def unit kg_hr as
    unit kilogram;
    unit hour {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit hour {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit nM {expo: -1};
    unit hour {expo: -1};
  enddef;

  def comp environment as
    var time: hour {pub: out};
  enddef;

  // alternative: albumin-testosterone complex in the blood
  // title: ATbl
  def comp ATbl as
    var ATbl: nanomole {pub: out, init: 0.0};
    var k2T: nmol_hr {init: 0.17};
    var Qb: l_hr {pub: in};
    var Qp: l_hr {pub: in};
    var Ql: l_hr {pub: in};
    var Qt: l_hr {pub: in};
    var CTbf: nM {pub: in};
    var CTblf: nM {pub: in};
    var CTpf: nM {pub: in};
    var CTbl: nM {pub: in};
    var CTlf: nM {pub: in};
    var CTtv: nM {pub: in};
    var ts: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(ATbl, time) = Qb*(CTbf-CTblf)+Qp*(CTpf-CTbl)+Ql*(CTlf-CTbl)+Qt*(1.0{dimensionless}-ts)*(CTtv-CTblf)+k2T;
  enddef;

  // alternative: albumin-5alpha-dihydrotestosterone complex in the blood
  // title: ADbl
  def comp ADbl as
    var ADbl: nanomole {pub: out, init: 0.0};
    var Qbt: l_hr {pub: in};
    var Qp: l_hr {pub: in};
    var Ql: l_hr {pub: in};
    var CDbf: nM {pub: in};
    var CDblf: nM {pub: in};
    var CDpf: nM {pub: in};
    var CDlf: nM {pub: in};
    var CDbl: nM {pub: in};
    var time: hour {pub: in};
    ode(ADbl, time) = Qbt*(CDbf-CDblf)+Qp*(CDpf-CDblf)+Ql*(CDlf-CDbl);
  enddef;

  def comp CT_A as
    var CT_A: nM {pub: out, init: 0.0};
    var kTA_on: second_order_rate_constant {init: 0.18};
    var kTA_off: first_order_rate_constant {init: 8131.0};
    var CTblf: nM {pub: in};
    var CAf: nM {pub: in};
    var time: hour {pub: in};
    ode(CT_A, time) = kTA_on*CTblf*CAf-kTA_off*CT_A;
  enddef;

  def comp CD_A as
    var CD_A: nM {pub: out, init: 0.0};
    var kDA_on: second_order_rate_constant {init: 0.15};
    var kDA_off: first_order_rate_constant {init: 5407.0};
    var CDblf: nM {pub: in};
    var CAf: nM {pub: in};
    var time: hour {pub: in};
    ode(CD_A, time) = kDA_on*CDblf*CAf-kDA_off*CD_A;
  enddef;

  def comp CTblf as
    var CTblf: nM {pub: out};
    var CTbl: nM {pub: in};
    var CT_A: nM {pub: in};
    CTblf = CTbl-CT_A;
  enddef;

  def comp CDblf as
    var CDblf: nM {pub: out};
    var CDbl: nM {pub: in};
    var CD_A: nM {pub: in};
    CDblf = CDbl-CD_A;
  enddef;

  def comp CAf as
    var CAf: nM {pub: out};
    var CA: nM {pub: in};
    var CD_A: nM {pub: in};
    var CT_A: nM {pub: in};
    CAf = CA-(CT_A+CD_A);
  enddef;

  // alternative: albumin-testosterone complex in the liver
  // title: ATl
  def comp ATl as
    var ATl: nanomole {pub: out, init: 0.0};
    var k1T: first_order_rate_constant {pub: in};
    var km5alpha: nM {pub: in};
    var Vmax1: nmol_hr {pub: in};
    var Ql: l_hr {pub: in};
    var CTbl: nM {pub: in};
    var CTlf: nM {pub: in};
    var PTl: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(ATl, time) = Ql*(CTbl-CTlf)-(Vmax1*CTlf/(km5alpha+CTlf)+k1T*(ATl/PTl));
  enddef;

  // alternative: albumin-5alpha-dihydrotestosterone complex in the liver
  // title: ADl
  def comp ADl as
    var ADl: nanomole {pub: out, init: 0.0};
    var k1D: first_order_rate_constant {pub: in};
    var km5alpha: nM {pub: in};
    var Vmax1: nmol_hr {pub: in};
    var Ql: l_hr {pub: in};
    var CDbl: nM {pub: in};
    var CTlf: nM {pub: in};
    var CDlf: nM {pub: in};
    var PDl: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(ADl, time) = Ql*(CDbl-CDlf)-(Vmax1*CTlf/(km5alpha+CTlf)+k1D*(ADl/PDl));
  enddef;

  def comp CTlf as
    var CTlf: nM {pub: out};
    var CTl: nM {pub: in};
    var PTl: dimensionless {pub: in};
    CTlf = CTl/PTl;
  enddef;

  def comp CDlf as
    var CDlf: nM {pub: out};
    var CDl: nM {pub: in};
    var PDl: dimensionless {pub: in};
    CDlf = CDl/PDl;
  enddef;

  // alternative: albumin-testosterone complex in the IF compartment of the testes
  // title: ATif
  def comp ATif as
    var ATif: nanomole {pub: out, init: 0.0};
    var k1T: first_order_rate_constant {pub: in};
    var Qt: l_hr {pub: in};
    var mu: l_hr {pub: in};
    var PTif: dimensionless {pub: in};
    var CTblf: nM {pub: in};
    var CTif: nM {pub: in};
    var CTst: nM {pub: in};
    var CLH: nanomole {pub: in};
    var PTst: dimensionless {pub: in};
    var ts: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(ATif, time) = Qt*(1.0{dimensionless}-ts)*(CTblf-CTif/PTif)+mu*(CTst/PTst-CTif)+k1T*CLH;
  enddef;

  def comp ATst as
    var ATst: nanomole {pub: out, init: 0.0};
    var mu: l_hr {pub: in};
    var CTif: nM {pub: in};
    var PTst: dimensionless {pub: in};
    var CTst: nM {pub: in};
    var time: hour {pub: in};
    ode(ATst, time) = mu*(CTif-CTst/PTst);
  enddef;

  def comp CTtv as
    var CTtv: nM {pub: out};
    var CTif: nM {pub: in};
    var PTif: dimensionless {pub: in};
    CTtv = CTif/PTif;
  enddef;

  // alternative: albumin-testosterone complex in the prostate
  // title: ATp
  def comp ATp as
    var ATp: nanomole {pub: out, init: 0.0};
    var km5alpha: nM {pub: in};
    var Vmax0: nmol_hr {pub: in};
    var Qp: l_hr {pub: in};
    var CTbl: nM {pub: in};
    var CTpf: nM {pub: in};
    var time: hour {pub: in};
    ode(ATp, time) = Qp*(CTbl-CTpf)-Vmax0*CTpf/(km5alpha+CTpf);
  enddef;

  // alternative: albumin-5alpha-dihydrotestosterone complex in the prostate
  // title: ADp
  def comp ADp as
    var ADp: nanomole {pub: out, init: 0.0};
    var km5alpha: nM {pub: in};
    var Vmax0: nmol_hr {pub: in};
    var Qp: l_hr {pub: in};
    var CDbl: nM {pub: in};
    var CDpf: nM {pub: in};
    var CTpf: nM {pub: in};
    var time: hour {pub: in};
    ode(ADp, time) = Qp*(CDbl-CDpf)-Vmax0*CTpf/(km5alpha+CTpf);
  enddef;

  def comp CT_R as
    var CT_R: nM {pub: out, init: 0.0};
    var kTR_on: second_order_rate_constant {init: 0.14};
    var kTR_off: first_order_rate_constant {init: 0.069};
    var CTpf: nM {pub: in};
    var CRf: nM {pub: in};
    var time: hour {pub: in};
    ode(CT_R, time) = kTR_on*CTpf*CRf-kTR_off*CT_R;
  enddef;

  def comp CD_R as
    var CD_R: nM {pub: out, init: 0.0};
    var kDR_on: second_order_rate_constant {init: 0.053};
    var kDR_off: first_order_rate_constant {init: 0.018};
    var CDpf: nM {pub: in};
    var CRf: nM {pub: in};
    var time: hour {pub: in};
    ode(CD_R, time) = kDR_on*CDpf*CRf-kDR_off*CD_R;
  enddef;

  def comp CDT as
    var CDT: nM {pub: out, init: 0.0};
    var kDT_on: second_order_rate_constant {init: 0.14};
    var kDT_off: first_order_rate_constant {init: 3.13};
    var CD_R: nM {pub: in};
    var CT_R: nM {pub: in};
    var time: hour {pub: in};
    ode(CDT, time) = kDT_on*CD_R*CT_R-kDT_off*CDT;
  enddef;

  def comp CDD as
    var CDD: nM {pub: out, init: 0.0};
    var kDD_on: second_order_rate_constant {init: 0.14};
    var kDD_off: first_order_rate_constant {init: 3.13};
    var CD_R: nM {pub: in};
    var time: hour {pub: in};
    ode(CDD, time) = kDD_on*sqr(CD_R)-kDD_off*CDD;
  enddef;

  def comp CTT as
    var CTT: nM {pub: out, init: 0.0};
    var kTT_on: second_order_rate_constant {init: 0.14};
    var kTT_off: first_order_rate_constant {init: 3.13};
    var CT_R: nM {pub: in};
    var time: hour {pub: in};
    ode(CTT, time) = kTT_on*sqr(CT_R)-kTT_off*CTT;
  enddef;

  def comp CDD5a as
    var CDD5a: nM {pub: out, init: 0.0};
    var kDNA_onDD5a: second_order_rate_constant {init: 0.14};
    var kDNA_offDD5a: first_order_rate_constant {init: 0.07};
    var CDD: nM {pub: in};
    var CDNA5af: nM {pub: in};
    var time: hour {pub: in};
    ode(CDD5a, time) = kDNA_onDD5a*CDD*CDNA5af-kDNA_offDD5a*CDD5a;
  enddef;

  def comp CDDcd as
    var CDDcd: nM {pub: out, init: 0.0};
    var kDNA_onDDcd: second_order_rate_constant {init: 0.14};
    var kDNA_offDDcd: first_order_rate_constant {init: 0.1};
    var CDD: nM {pub: in};
    var CDNAcdf: nM {pub: in};
    var time: hour {pub: in};
    ode(CDDcd, time) = kDNA_onDDcd*CDD*CDNAcdf-kDNA_offDDcd*CDDcd;
  enddef;

  def comp CDDsec as
    var CDDsec: nM {pub: out, init: 0.0};
    var kDNA_onDDsec: second_order_rate_constant {init: 0.14};
    var kDNA_offDDsec: first_order_rate_constant {init: 0.2};
    var CDD: nM {pub: in};
    var CDNAsecf: nM {pub: in};
    var time: hour {pub: in};
    ode(CDDsec, time) = kDNA_onDDsec*CDD*CDNAsecf-kDNA_offDDsec*CDDsec;
  enddef;

  def comp CDDcp as
    var CDDcp: nM {pub: out, init: 0.0};
    var kDNA_onDDcp: second_order_rate_constant {init: 0.14};
    var kDNA_offDDcp: first_order_rate_constant {init: 0.7};
    var CDD: nM {pub: in};
    var CDNAcpf: nM {pub: in};
    var time: hour {pub: in};
    ode(CDDcp, time) = kDNA_onDDcp*CDD*CDNAcpf-kDNA_offDDcp*CDDcp;
  enddef;

  def comp CDT5a as
    var CDT5a: nM {pub: out, init: 0.0};
    var kDNA_onDT5a: second_order_rate_constant {init: 0.14};
    var kDNA_offDT5a: first_order_rate_constant {init: 0.56};
    var CDT: nM {pub: in};
    var CDNA5af: nM {pub: in};
    var time: hour {pub: in};
    ode(CDT5a, time) = kDNA_onDT5a*CDT*CDNA5af-kDNA_offDT5a*CDT5a;
  enddef;

  def comp CDTcd as
    var CDTcd: nM {pub: out, init: 0.0};
    var kDNA_onDTcd: second_order_rate_constant {init: 0.14};
    var kDNA_offDTcd: first_order_rate_constant {init: 0.8};
    var CDT: nM {pub: in};
    var CDNAcdf: nM {pub: in};
    var time: hour {pub: in};
    ode(CDTcd, time) = kDNA_onDTcd*CDT*CDNAcdf-kDNA_offDTcd*CDTcd;
  enddef;

  def comp CDTsec as
    var CDTsec: nM {pub: out, init: 0.0};
    var kDNA_onDTsec: second_order_rate_constant {init: 0.14};
    var kDNA_offDTsec: first_order_rate_constant {init: 1.6};
    var CDT: nM {pub: in};
    var CDNAsecf: nM {pub: in};
    var time: hour {pub: in};
    ode(CDTsec, time) = kDNA_onDTsec*CDT*CDNAsecf-kDNA_offDTsec*CDTsec;
  enddef;

  def comp CDTcp as
    var CDTcp: nM {pub: out, init: 0.0};
    var kDNA_onDTcp: second_order_rate_constant {init: 0.14};
    var kDNA_offDTcp: first_order_rate_constant {init: 5.6};
    var CDT: nM {pub: in};
    var CDNAcpf: nM {pub: in};
    var time: hour {pub: in};
    ode(CDTcp, time) = kDNA_onDTcp*CDT*CDNAcpf-kDNA_offDTcp*CDTcp;
  enddef;

  def comp CTT5a as
    var CTT5a: nM {pub: out, init: 0.0};
    var kDNA_onTT5a: second_order_rate_constant {init: 0.14};
    var kDNA_offTT5a: first_order_rate_constant {init: 0.84};
    var CTT: nM {pub: in};
    var CDNA5af: nM {pub: in};
    var time: hour {pub: in};
    ode(CTT5a, time) = kDNA_onTT5a*CTT*CDNA5af-kDNA_offTT5a*CTT5a;
  enddef;

  def comp CTTcd as
    var CTTcd: nM {pub: out, init: 0.0};
    var kDNA_onTTcd: second_order_rate_constant {init: 0.14};
    var kDNA_offTTcd: first_order_rate_constant {init: 1.2};
    var CTT: nM {pub: in};
    var CDNAcdf: nM {pub: in};
    var time: hour {pub: in};
    ode(CTTcd, time) = kDNA_onTTcd*CTT*CDNAcdf-kDNA_offTTcd*CTTcd;
  enddef;

  def comp CTTsec as
    var CTTsec: nM {pub: out, init: 0.0};
    var kDNA_onTTsec: second_order_rate_constant {init: 0.14};
    var kDNA_offTTsec: first_order_rate_constant {init: 2.4};
    var CTT: nM {pub: in};
    var CDNAsecf: nM {pub: in};
    var time: hour {pub: in};
    ode(CTTsec, time) = kDNA_onTTsec*CTT*CDNAsecf-kDNA_offTTsec*CTTsec;
  enddef;

  def comp CTTcp as
    var CTTcp: nM {pub: out, init: 0.0};
    var kDNA_onTTcp: second_order_rate_constant {init: 0.14};
    var kDNA_offTTcp: first_order_rate_constant {init: 8.4};
    var CTT: nM {pub: in};
    var CDNAcpf: nM {pub: in};
    var time: hour {pub: in};
    ode(CTTcp, time) = kDNA_onTTcp*CTT*CDNAcpf-kDNA_offTTcp*CTTcp;
  enddef;

  def comp CTpf as
    var CTpf: nM {pub: out};
    var T: nM;
    var NTp: dimensionless {init: 0.79};
    var CTp: nM {pub: in};
    var CT_R: nM {pub: in};
    var CTT: nM {pub: in};
    var CDT: nM {pub: in};
    var CTTsec: nM {pub: in};
    var CDTsec: nM {pub: in};
    var CTTcd: nM {pub: in};
    var CDTcd: nM {pub: in};
    var CTTcp: nM {pub: in};
    var CDTcp: nM {pub: in};
    var CTT5a: nM {pub: in};
    var CDT5a: nM {pub: in};
    CTpf = (CTp-(CT_R+2.0{dimensionless}*CTT+CDT+T))/(1.0{dimensionless}+NTp);
    T = CTTsec+CDTsec+CTT5a+CDT5a+CTTcd+CDTcd+CTTcp+CDTcp;
  enddef;

  def comp CDpf as
    var CDpf: nM {pub: out};
    var D: nM;
    var NDp: dimensionless {init: 1.00};
    var CDp: nM {pub: in};
    var CD_R: nM {pub: in};
    var CDD: nM {pub: in};
    var CDT: nM {pub: in};
    var CDDsec: nM {pub: in};
    var CDTsec: nM {pub: in};
    var CDDcd: nM {pub: in};
    var CDTcd: nM {pub: in};
    var CDDcp: nM {pub: in};
    var CDTcp: nM {pub: in};
    var CDD5a: nM {pub: in};
    var CDT5a: nM {pub: in};
    CDpf = (CDp-(CD_R+2.0{dimensionless}*CDD+CDT+D))/(1.0{dimensionless}+NDp);
    D = CDDsec+CDTsec+CDD5a+CDT5a+CDDcd+CDTcd+CDDcp+CDTcp;
  enddef;

  def comp CRf as
    var CRf: nM {pub: out};
    var CR: nM {pub: in};
    var CT_R: nM {pub: in};
    var CD_R: nM {pub: in};
    var CTT: nM {pub: in};
    var CDD: nM {pub: in};
    var CDT: nM {pub: in};
    var CDNAcdf: nM {pub: in};
    var CDNAcpf: nM {pub: in};
    var CDNAsecf: nM {pub: in};
    var CDNA5af: nM {pub: in};
    CRf = CR-(CT_R+CD_R+2.0{dimensionless}*(CTT+CDD+CDT)+2.0{dimensionless}*(CDNAcdf+CDNAsecf+CDNAcpf+CDNA5af));
  enddef;

  def comp CDNAcdf as
    var CDNAcdf: nM {pub: out};
    var CTTcd: nM {pub: in};
    var CDNAcd: nM {pub: in};
    var CDTcd: nM {pub: in};
    var CDDcd: nM {pub: in};
    CDNAcdf = CDNAcd-(CTTcd+CDDcd+CDTcd);
  enddef;

  def comp CDNAsecf as
    var CDNAsecf: nM {pub: out};
    var CTTsec: nM {pub: in};
    var CDNAsec: nM {pub: in};
    var CDTsec: nM {pub: in};
    var CDDsec: nM {pub: in};
    CDNAsecf = CDNAsec-(CTTsec+CDDsec+CDTsec);
  enddef;

  def comp CDNA5af as
    var CDNA5af: nM {pub: out};
    var CTT5a: nM {pub: in};
    var CDNA5a: nM {pub: in};
    var CDT5a: nM {pub: in};
    var CDD5a: nM {pub: in};
    CDNA5af = CDNA5a-(CTT5a+CDD5a+CDT5a);
  enddef;

  def comp CDNAcpf as
    var CDNAcpf: nM {pub: out};
    var CTTcp: nM {pub: in};
    var CDNAcp: nM {pub: in};
    var CDTcp: nM {pub: in};
    var CDDcp: nM {pub: in};
    CDNAcpf = CDNAcp-(CTTcp+CDDcp+CDTcp);
  enddef;

  def comp DNAocp as
    var DNAocp: dimensionless {pub: out};
    var CTTcp: nM {pub: in};
    var CDNAcp: nM {pub: in};
    var CDTcp: nM {pub: in};
    var CDDcp: nM {pub: in};
    DNAocp = (CTTcp+CDDcp+CDTcp)/CDNAcp;
  enddef;

  def comp DNAosec as
    var DNAosec: dimensionless {pub: out};
    var CTTsec: nM {pub: in};
    var CDNAsec: nM {pub: in};
    var CDTsec: nM {pub: in};
    var CDDsec: nM {pub: in};
    DNAosec = (CTTsec+CDDsec+CDTsec)/CDNAsec;
  enddef;

  def comp DNAocd as
    var DNAocd: dimensionless {pub: out};
    var CTTcd: nM {pub: in};
    var CDNAcd: nM {pub: in};
    var CDTcd: nM {pub: in};
    var CDDcd: nM {pub: in};
    DNAocd = (CTTcd+CDDcd+CDTcd)/CDNAcd;
  enddef;

  def comp DNAo5a as
    var DNAo5a: dimensionless {pub: out};
    var CTT5a: nM {pub: in};
    var CDNA5a: nM {pub: in};
    var CDT5a: nM {pub: in};
    var CDD5a: nM {pub: in};
    DNAo5a = (CTT5a+CDD5a+CDT5a)/CDNA5a;
  enddef;

  def comp ATb as
    var ATb: nanomole {pub: out, init: 0.0};
    var Qb: l_hr {pub: in};
    var CTb: nM {pub: in};
    var CTblf: nM {pub: in};
    var PTb: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(ATb, time) = Qb*(CTblf-CTb/PTb);
  enddef;

  def comp ADb as
    var ADb: nanomole {pub: out, init: 0.0};
    var Qbt: l_hr {pub: in};
    var CDb: nM {pub: in};
    var CDblf: nM {pub: in};
    var PDb: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(ADb, time) = Qbt*(CDblf-CDb/PDb);
  enddef;

  def comp ALH as
    var ALH: nanomole {pub: out, init: 0.0};
    var kLH1: l_hr {init: 0.13};
    var kLH2: nmol_hr {init: 0.026};
    var kLH3: nmol_hr {init: 1.68E-4};
    var kLH4: first_order_rate_constant {init: 0.80};
    var alpha_T: dimensionless {init: 0.25};
    var alpha_D: dimensionless {init: 0.75};
    var A: nmol_hr;
    var B: nmol_hr;
    var CTblf: nM {pub: in};
    var CDblf: nM {pub: in};
    var time: hour {pub: in};
    A = -kLH1*(alpha_T*CTblf+alpha_D*CDblf)+kLH2;
    B = kLH3;
    ode(ALH, time) = sel
      case A > B:
        A-kLH4*ALH;
      otherwise:
        B-kLH4*ALH;
    endsel;
  enddef;

  def comp AR as
    var AR: nanomole {pub: out, init: 0.0};
    var k1R: nmol_hr {init: 68.15};
    var keR: l_hr {init: 71.90};
    var CRf: nM {pub: in};
    var time: hour {pub: in};
    ode(AR, time) = k1R-keR*CRf;
  enddef;

  def comp CR as
    var CR: nM {pub: out};
    var AR: nanomole {pub: in};
    var Vp: litre {pub: in};
    CR = AR/Vp;
  enddef;

  def comp Qp as
    var Qp: l_hr {pub: out};
    var kQp: first_order_rate_constant {init: 73.84};
    var Vpc: litre;
    var VPC1: litre {pub: in};
    var VPC2: litre {pub: in};
    Qp = kQp*Vpc;
    Vpc = VPC1+VPC2;
  enddef;

  def comp Vmax as
    var Vmax: nmol_hr {pub: out};
    var k5a: nmol_hr {init: 3.02};
    var DNAo5a: dimensionless {pub: in};
    Vmax = k5a*DNAo5a;
  enddef;

  def comp VPC1 as
    var VPC1: litre {pub: out, init: 0.0};
    var kcpl: kg_hr {init: 1.17E-7};
    var kcd1: first_order_rate_constant {init: 0.014};
    var VPC1b: kg {pub: in};
    var DNAocp: dimensionless {pub: in};
    var DNAocd: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(VPC1, time) = VPC1/VPC1b*kcpl*DNAocp-kcd1*(1.0{dimensionless}-DNAocd)*VPC1;
  enddef;

  def comp VPL1 as
    var VPL1: litre {pub: out, init: 0.0};
    var ksec: kg_hr {init: 8.44E-6};
    var kflo: first_order_rate_constant {init: 0.043};
    var VPC1b: kg {pub: in};
    var VPC1: litre {pub: in};
    var DNAosec: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(VPL1, time) = VPC1/VPC1b*ksec*DNAosec-kflo*VPL1;
  enddef;

  def comp Vp as
    var Vp: litre {pub: out};
    var VPC1: litre {pub: in};
    var VPC2: litre {pub: in};
    var VPL1: litre {pub: in};
    var VPL2: litre {pub: in};
    Vp = VPC1+VPC2+VPL1+VPL2;
  enddef;

  def comp model_parameters as
    var Qb: l_hr {pub: out};
    var Ql: l_hr {pub: out, init: 1.06};
    var Qt: l_hr {pub: out, init: 0.061};
    var Qbt: l_hr {pub: out};
    var Qc: l_hr {init: 6.08};
    var k1T: first_order_rate_constant {pub: out, init: 87.93};
    var k1D: first_order_rate_constant {pub: out, init: 77.20};
    var km5alpha: nM {pub: out, init: 40.00};
    var ts: dimensionless {pub: out, init: 0.56};
    var mu: l_hr {pub: out, init: 1000.0};
    var Vmax1: nmol_hr {pub: out, init: 3.65};
    var Vmax0: nmol_hr {pub: out, init: 2.89};
    var PTif: dimensionless {pub: out, init: 1.96};
    var PTst: dimensionless {pub: out, init: 1.00};
    var PTl: dimensionless {pub: out, init: 2.75};
    var PDl: dimensionless {pub: out, init: 2.00};
    var PTb: dimensionless {pub: out, init: 1.00};
    var PDb: dimensionless {pub: out, init: 0.62};
    var CTbf: nM {pub: out};
    var CTbl: nM {pub: out, init: 7.60};
    var CDbf: nM {pub: out};
    var CDbl: nM {pub: out, init: 0.59};
    var CA: nM {pub: out, init: 5.00E5};
    var CTl: nM {pub: out, init: 9.92};
    var CDl: nM {pub: out, init: 0.92};
    var CTst: nM {pub: out, init: 307.29};
    var CLH: nanomole {pub: out, init: 0.104};
    var CTif: nM {pub: out, init: 307.29};
    var CDNAcd: nM {pub: out, init: 0.075};
    var CDNAsec: nM {pub: out, init: 0.075};
    var CDNAcp: nM {pub: out, init: 0.075};
    var CDNA5a: nM {pub: out, init: 0.075};
    var CTb: nM {pub: out, init: 0.6275};
    var CDb: nM {pub: out, init: 0.019884};
    var VPC1b: kg {pub: out, init: 1E-4};
    var VPC2: litre {pub: out, init: 5.08E-5};
    var VPL2: litre {pub: out, init: 3.08E-6};
    var CTp: nM {pub: out, init: 11.38};
    var CDp: nM {pub: out, init: 52.46};
    var Qp: l_hr {pub: in};
    Qb = Qc-(Qp+Qt+Ql);
    Qbt = Qc-(Qp+Ql);
    CTbf = CTb/PTb;
    CDbf = CDb/PDb;
  enddef;
  def map between ATbl and environment for
    vars time and time;
  enddef;
  def map between ADbl and environment for
    vars time and time;
  enddef;
  def map between CT_A and environment for
    vars time and time;
  enddef;
  def map between CD_A and environment for
    vars time and time;
  enddef;
  def map between ATl and environment for
    vars time and time;
  enddef;
  def map between ADl and environment for
    vars time and time;
  enddef;
  def map between ATif and environment for
    vars time and time;
  enddef;
  def map between ATst and environment for
    vars time and time;
  enddef;
  def map between ATp and environment for
    vars time and time;
  enddef;
  def map between ADp and environment for
    vars time and time;
  enddef;
  def map between CT_R and environment for
    vars time and time;
  enddef;
  def map between CD_R and environment for
    vars time and time;
  enddef;
  def map between CDT and environment for
    vars time and time;
  enddef;
  def map between CDD and environment for
    vars time and time;
  enddef;
  def map between CTT and environment for
    vars time and time;
  enddef;
  def map between CDD5a and environment for
    vars time and time;
  enddef;
  def map between CDDcd and environment for
    vars time and time;
  enddef;
  def map between CDDsec and environment for
    vars time and time;
  enddef;
  def map between CDDcp and environment for
    vars time and time;
  enddef;
  def map between CDT5a and environment for
    vars time and time;
  enddef;
  def map between CDTcd and environment for
    vars time and time;
  enddef;
  def map between CDTsec and environment for
    vars time and time;
  enddef;
  def map between CDTcp and environment for
    vars time and time;
  enddef;
  def map between CTT5a and environment for
    vars time and time;
  enddef;
  def map between CTTcd and environment for
    vars time and time;
  enddef;
  def map between CTTsec and environment for
    vars time and time;
  enddef;
  def map between CTTcp and environment for
    vars time and time;
  enddef;
  def map between ATb and environment for
    vars time and time;
  enddef;
  def map between ADb and environment for
    vars time and time;
  enddef;
  def map between AR and environment for
    vars time and time;
  enddef;
  def map between ALH and environment for
    vars time and time;
  enddef;
  def map between VPC1 and environment for
    vars time and time;
  enddef;
  def map between VPL1 and environment for
    vars time and time;
  enddef;
  def map between ATbl and Qp for
    vars Qp and Qp;
  enddef;
  def map between ATbl and CTblf for
    vars CTblf and CTblf;
  enddef;
  def map between ATbl and CTpf for
    vars CTpf and CTpf;
  enddef;
  def map between ATbl and CTlf for
    vars CTlf and CTlf;
  enddef;
  def map between ATbl and CTtv for
    vars CTtv and CTtv;
  enddef;
  def map between ATbl and model_parameters for
    vars Qb and Qb;
    vars Ql and Ql;
    vars Qt and Qt;
    vars CTbf and CTbf;
    vars CTbl and CTbl;
    vars ts and ts;
  enddef;
  def map between ADbl and Qp for
    vars Qp and Qp;
  enddef;
  def map between ADbl and CDblf for
    vars CDblf and CDblf;
  enddef;
  def map between ADbl and CDpf for
    vars CDpf and CDpf;
  enddef;
  def map between ADbl and CDlf for
    vars CDlf and CDlf;
  enddef;
  def map between ADl and CDlf for
    vars CDlf and CDlf;
  enddef;
  def map between ADbl and model_parameters for
    vars Qbt and Qbt;
    vars Ql and Ql;
    vars CDbf and CDbf;
    vars CDbl and CDbl;
  enddef;
  def map between CT_A and CTblf for
    vars CTblf and CTblf;
    vars CT_A and CT_A;
  enddef;
  def map between CT_A and CAf for
    vars CAf and CAf;
    vars CT_A and CT_A;
  enddef;
  def map between CD_A and CDblf for
    vars CDblf and CDblf;
    vars CD_A and CD_A;
  enddef;
  def map between CD_A and CAf for
    vars CAf and CAf;
    vars CD_A and CD_A;
  enddef;
  def map between CTblf and model_parameters for
    vars CTbl and CTbl;
  enddef;
  def map between CDblf and model_parameters for
    vars CDbl and CDbl;
  enddef;
  def map between CAf and model_parameters for
    vars CA and CA;
  enddef;
  def map between ATl and CTlf for
    vars CTlf and CTlf;
  enddef;
  def map between ATl and model_parameters for
    vars k1T and k1T;
    vars km5alpha and km5alpha;
    vars Vmax1 and Vmax1;
    vars Ql and Ql;
    vars CTbl and CTbl;
    vars PTl and PTl;
  enddef;
  def map between ADl and CTlf for
    vars CTlf and CTlf;
  enddef;
  def map between ADl and model_parameters for
    vars k1D and k1D;
    vars km5alpha and km5alpha;
    vars Vmax1 and Vmax1;
    vars Ql and Ql;
    vars CDbl and CDbl;
    vars PDl and PDl;
  enddef;
  def map between CTlf and model_parameters for
    vars CTl and CTl;
    vars PTl and PTl;
  enddef;
  def map between CDlf and model_parameters for
    vars CDl and CDl;
    vars PDl and PDl;
  enddef;
  def map between ATif and CTblf for
    vars CTblf and CTblf;
  enddef;
  def map between ATif and model_parameters for
    vars k1T and k1T;
    vars mu and mu;
    vars PTif and PTif;
    vars Qt and Qt;
    vars CTst and CTst;
    vars CTif and CTif;
    vars PTst and PTst;
    vars ts and ts;
    vars CLH and CLH;
  enddef;
  def map between ATst and model_parameters for
    vars mu and mu;
    vars CTif and CTif;
    vars CTst and CTst;
    vars PTst and PTst;
  enddef;
  def map between CTtv and model_parameters for
    vars CTif and CTif;
    vars PTif and PTif;
  enddef;
  def map between ATp and model_parameters for
    vars km5alpha and km5alpha;
    vars CTbl and CTbl;
    vars Vmax0 and Vmax0;
  enddef;
  def map between ATp and Qp for
    vars Qp and Qp;
  enddef;
  def map between model_parameters and Qp for
    vars Qp and Qp;
    vars VPC2 and VPC2;
  enddef;
  def map between VPC1 and Qp for
    vars VPC1 and VPC1;
  enddef;
  def map between ATp and CTpf for
    vars CTpf and CTpf;
  enddef;
  def map between ADp and model_parameters for
    vars km5alpha and km5alpha;
    vars CDbl and CDbl;
    vars Vmax0 and Vmax0;
  enddef;
  def map between ADp and Qp for
    vars Qp and Qp;
  enddef;
  def map between ADp and CTpf for
    vars CTpf and CTpf;
  enddef;
  def map between ADp and CDpf for
    vars CDpf and CDpf;
  enddef;
  def map between CT_R and CRf for
    vars CRf and CRf;
    vars CT_R and CT_R;
  enddef;
  def map between CT_R and CTpf for
    vars CTpf and CTpf;
    vars CT_R and CT_R;
  enddef;
  def map between CD_R and CRf for
    vars CRf and CRf;
    vars CD_R and CD_R;
  enddef;
  def map between CD_R and CDpf for
    vars CDpf and CDpf;
    vars CD_R and CD_R;
  enddef;
  def map between CT_R and CDT for
    vars CT_R and CT_R;
  enddef;
  def map between CD_R and CDT for
    vars CD_R and CD_R;
  enddef;
  def map between CT_R and CTT for
    vars CT_R and CT_R;
  enddef;
  def map between CD_R and CDD for
    vars CD_R and CD_R;
  enddef;
  def map between CDD5a and CDD for
    vars CDD and CDD;
  enddef;
  def map between CDD5a and CDNA5af for
    vars CDD5a and CDD5a;
    vars CDNA5af and CDNA5af;
  enddef;
  def map between CDDcd and CDD for
    vars CDD and CDD;
  enddef;
  def map between CDDcd and CDNAcdf for
    vars CDDcd and CDDcd;
    vars CDNAcdf and CDNAcdf;
  enddef;
  def map between CDDsec and CDD for
    vars CDD and CDD;
  enddef;
  def map between CDDsec and CDNAsecf for
    vars CDDsec and CDDsec;
    vars CDNAsecf and CDNAsecf;
  enddef;
  def map between CDDsec and CDpf for
    vars CDDsec and CDDsec;
  enddef;
  def map between CDDcp and CDD for
    vars CDD and CDD;
  enddef;
  def map between CDDcp and CDNAcpf for
    vars CDDcp and CDDcp;
    vars CDNAcpf and CDNAcpf;
  enddef;
  def map between CDT5a and CDT for
    vars CDT and CDT;
  enddef;
  def map between CDT5a and CDNA5af for
    vars CDT5a and CDT5a;
    vars CDNA5af and CDNA5af;
  enddef;
  def map between CDTcd and CDT for
    vars CDT and CDT;
  enddef;
  def map between CDTcd and CDNAcdf for
    vars CDTcd and CDTcd;
    vars CDNAcdf and CDNAcdf;
  enddef;
  def map between CDTsec and CDT for
    vars CDT and CDT;
  enddef;
  def map between CDTsec and CDNAsecf for
    vars CDTsec and CDTsec;
    vars CDNAsecf and CDNAsecf;
  enddef;
  def map between CDTcp and CDT for
    vars CDT and CDT;
  enddef;
  def map between CDTcp and CDNAcpf for
    vars CDTcp and CDTcp;
    vars CDNAcpf and CDNAcpf;
  enddef;
  def map between CTT5a and CTT for
    vars CTT and CTT;
  enddef;
  def map between CTT5a and CDNA5af for
    vars CTT5a and CTT5a;
    vars CDNA5af and CDNA5af;
  enddef;
  def map between CTTcd and CTT for
    vars CTT and CTT;
  enddef;
  def map between CTTcd and CDNAcdf for
    vars CTTcd and CTTcd;
    vars CDNAcdf and CDNAcdf;
  enddef;
  def map between CTTsec and CTT for
    vars CTT and CTT;
  enddef;
  def map between CTTsec and CDNAsecf for
    vars CTTsec and CTTsec;
    vars CDNAsecf and CDNAsecf;
  enddef;
  def map between CTTcp and CTT for
    vars CTT and CTT;
  enddef;
  def map between CTTcp and CDNAcpf for
    vars CTTcp and CTTcp;
    vars CDNAcpf and CDNAcpf;
  enddef;
  def map between CTpf and CTT for
    vars CTT and CTT;
  enddef;
  def map between CTpf and CDT for
    vars CDT and CDT;
  enddef;
  def map between CTpf and CDTsec for
    vars CDTsec and CDTsec;
  enddef;
  def map between CTpf and CTTcd for
    vars CTTcd and CTTcd;
  enddef;
  def map between CTpf and CDTcd for
    vars CDTcd and CDTcd;
  enddef;
  def map between CTpf and CTTcp for
    vars CTTcp and CTTcp;
  enddef;
  def map between CTpf and CDTcp for
    vars CDTcp and CDTcp;
  enddef;
  def map between CTpf and CTT5a for
    vars CTT5a and CTT5a;
  enddef;
  def map between CTpf and CDT5a for
    vars CDT5a and CDT5a;
  enddef;
  def map between CTpf and model_parameters for
    vars CTp and CTp;
  enddef;
  def map between CDpf and CDD for
    vars CDD and CDD;
  enddef;
  def map between CDpf and CDT for
    vars CDT and CDT;
  enddef;
  def map between CTpf and CTTsec for
    vars CTTsec and CTTsec;
  enddef;
  def map between CDpf and CDTsec for
    vars CDTsec and CDTsec;
  enddef;
  def map between CDpf and CDDcd for
    vars CDDcd and CDDcd;
  enddef;
  def map between CDpf and CDTcd for
    vars CDTcd and CDTcd;
  enddef;
  def map between CDpf and CDDcp for
    vars CDDcp and CDDcp;
  enddef;
  def map between CDpf and CDTcp for
    vars CDTcp and CDTcp;
  enddef;
  def map between CDpf and CDD5a for
    vars CDD5a and CDD5a;
  enddef;
  def map between CDpf and CDT5a for
    vars CDT5a and CDT5a;
  enddef;
  def map between CDpf and model_parameters for
    vars CDp and CDp;
  enddef;
  def map between CRf and CDD for
    vars CDD and CDD;
  enddef;
  def map between CRf and CDT for
    vars CDT and CDT;
  enddef;
  def map between CRf and CTT for
    vars CTT and CTT;
  enddef;
  def map between CRf and CDNAcdf for
    vars CDNAcdf and CDNAcdf;
  enddef;
  def map between CRf and CDNAsecf for
    vars CDNAsecf and CDNAsecf;
  enddef;
  def map between CRf and CDNAcpf for
    vars CDNAcpf and CDNAcpf;
  enddef;
  def map between CRf and CDNA5af for
    vars CDNA5af and CDNA5af;
  enddef;
  def map between CDNAcdf and model_parameters for
    vars CDNAcd and CDNAcd;
  enddef;
  def map between CDNAsecf and model_parameters for
    vars CDNAsec and CDNAsec;
  enddef;
  def map between CDNAcpf and model_parameters for
    vars CDNAcp and CDNAcp;
  enddef;
  def map between CDNA5af and model_parameters for
    vars CDNA5a and CDNA5a;
  enddef;
  def map between DNAocd and CTTcd for
    vars CTTcd and CTTcd;
  enddef;
  def map between DNAocd and CDTcd for
    vars CDTcd and CDTcd;
  enddef;
  def map between DNAocd and CDDcd for
    vars CDDcd and CDDcd;
  enddef;
  def map between DNAocd and model_parameters for
    vars CDNAcd and CDNAcd;
  enddef;
  def map between DNAosec and CTTsec for
    vars CTTsec and CTTsec;
  enddef;
  def map between DNAosec and CDTsec for
    vars CDTsec and CDTsec;
  enddef;
  def map between DNAosec and CDDsec for
    vars CDDsec and CDDsec;
  enddef;
  def map between DNAosec and model_parameters for
    vars CDNAsec and CDNAsec;
  enddef;
  def map between DNAocp and CTTcp for
    vars CTTcp and CTTcp;
  enddef;
  def map between DNAocp and CDTcp for
    vars CDTcp and CDTcp;
  enddef;
  def map between DNAocp and CDDcp for
    vars CDDcp and CDDcp;
  enddef;
  def map between DNAocp and model_parameters for
    vars CDNAcp and CDNAcp;
  enddef;
  def map between DNAo5a and CTT5a for
    vars CTT5a and CTT5a;
  enddef;
  def map between DNAo5a and CDT5a for
    vars CDT5a and CDT5a;
  enddef;
  def map between DNAo5a and CDD5a for
    vars CDD5a and CDD5a;
  enddef;
  def map between DNAo5a and model_parameters for
    vars CDNA5a and CDNA5a;
  enddef;
  def map between ATb and CTblf for
    vars CTblf and CTblf;
  enddef;
  def map between ATb and model_parameters for
    vars Qb and Qb;
    vars CTb and CTb;
    vars PTb and PTb;
  enddef;
  def map between ADb and CDblf for
    vars CDblf and CDblf;
  enddef;
  def map between ADb and model_parameters for
    vars Qbt and Qbt;
    vars CDb and CDb;
    vars PDb and PDb;
  enddef;
  def map between ALH and CTblf for
    vars CTblf and CTblf;
  enddef;
  def map between ALH and CDblf for
    vars CDblf and CDblf;
  enddef;
  def map between AR and CRf for
    vars CRf and CRf;
  enddef;
  def map between CR and CRf for
    vars CR and CR;
  enddef;
  def map between AR and CR for
    vars AR and AR;
  enddef;
  def map between Vp and CR for
    vars Vp and Vp;
  enddef;
  def map between Vmax and DNAo5a for
    vars DNAo5a and DNAo5a;
  enddef;
  def map between VPC1 and DNAocp for
    vars DNAocp and DNAocp;
  enddef;
  def map between VPC1 and DNAocd for
    vars DNAocd and DNAocd;
  enddef;
  def map between VPC1 and model_parameters for
    vars VPC1b and VPC1b;
  enddef;
  def map between VPL1 and DNAosec for
    vars DNAosec and DNAosec;
  enddef;
  def map between VPL1 and VPC1 for
    vars VPC1 and VPC1;
  enddef;
  def map between VPL1 and model_parameters for
    vars VPC1b and VPC1b;
  enddef;
  def map between Vp and VPC1 for
    vars VPC1 and VPC1;
  enddef;
  def map between Vp and VPL1 for
    vars VPL1 and VPL1;
  enddef;
  def map between Vp and model_parameters for
    vars VPC2 and VPC2;
    vars VPL2 and VPL2;
  enddef;
enddef;
