//   FILE :  riemer_SAC_model_1998.xml
//
// CREATED :  2nd January 2003
//
// LAST MODIFIED : 13th August 2003
//
// AUTHOR :  Catherine Lloyd
//           The Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the CellML Metadata 1.0 Specification released on 16th
// January, 2002.
//
// DESCRIPTION :  This file contains a CellML description of Riemer et al's 1998 mathematical model of stretch-induced changes in arrhythmogenesis and excitability in guinea pig ventricular myocytes.  This model is based on the the Luo-Rudy I model, 1991.
//
// CHANGES:
//   05/04/2003 - AAC - Changed the model name so the model loads in the database
//                      easier.
//   13/08/2003 - CML - Corrected equations.
// publisher: The University of Auckland, The Bioengineering Institute
// modification: W3CDTF 2003-07-30; Corrected equations: alpha_h in fast_sodium_current_h_gate. Added non-specific currents.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2003-04-05; Changed the model name so the model loads in the database easier.; Given Autumn; Family Cuellar; Other A
// created: W3CDTF 2003-01-02
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: Riemer et al's 1998 mathematical model of stretch-induced changes in arrhythmogenesis and excitability in guinea pig ventricular myocytes. This model is based on the the Luo-Rudy I model, 1991.
// bio_entity: Ventricular Myocyte
// comment: FN Catherine Lloyd; This is the CellML description of Riemer et al's 1998 mathematical model of stretch-induced changes in arrhythmogenesis and excitability in guinea pig ventricular myocytes. This model is based on the the Luo-Rudy I model, 1991.
// reference: subject_type keyword; excitation-contraction coupling; ventricular myocyte; arrhythmia; mechanoelectric coupling; calcium dynamics; Ventricular Myocyte; electrophysiology; myofilament mechanics; cardiac
// reference: Pubmed_id 9683430; Given Tara; Family Riemer; Other L; Given Eric; Family Sobie; Other A; Given Leslie; Family Tung; title Stretch-induced changes in arrhythmogenesis and excitability in experimentally based heart cell models; volume 275; first_page H431; title American Journal of Physiology; W3CDTF 1998-08; last_page H442
// species: Mammalia
def model riemer_sobie_tung_1998_version01 as
  // Modelling Cardiac Stretch-Induced Arrhythmogenesis
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This is the original unchecked version of the model imported from the previous CellML model repository, 24-Jan-2006.
  //
  // Model Structure
  //
  // Cardiac mechanoelectric coupling (that is, the influence of mechanical activity on the electrical state of the heart) has been well documented. It has been suggested that hearts that have been mechanically compromised by congestive heart failure display an increased prevalence of arrhythmia. In addition, in vitro studies have shown that sudden cardiac tissue stretch can stimulate arrhythmias. One hypothesised mechanism for the stretch sensitivity of cardiac muscle is the presence of stretch-activated channels (SACs).
  //
  // In their 1998 study, Riemer et al. investigate the potential role of SACs in excitability and arrhythmogenesis. To do this they added a linear, time-independent, stretch-sensitive current to the Luo-Rudy membrane model for guinea pig ventricular myocytes (see Luo-Rudy I model (${HTML_EXMPL_LR_I_MODEL}) and Zeng et al. 1995 model (${HTML_EXMPL_UPDATED_LR_II_MODEL}) for more details, and also see the figure below). Model simulations showed that increased stretch conductance led to resting potential depolarisation, a decreased excitation threshold, altered action potential duration, and, under certain conditions, early afterdepolarisations. From these results Riemer et al. concluded that stretch increases cellular excitability, making the heart prone to ectopic activity. Regional effects of stretch on action potential are influenced by factors such as the SAC reversal potential, ionic conditions and baseline refractoriness throughout the heart and therefore an increased risk of arrhythmia.
  //
  // The complete original paper reference is cited below:
  //
  // Stretch-induced changes in arrhythmogenesis and excitability in experimentally based heart cell models (http://ajpheart.physiology.org/cgi/content/abstract/275/2/H431), Tara L. Riemer, Eric A. Sobie, and Leslie Tung, 1998, American Journal of Physiology (http://ajpheart.physiology.org/), 275, H431-H442. (Full text (http://ajpheart.physiology.org/cgi/content/full/275/2/H431) and PDF (http://ajpheart.physiology.org/cgi/reprint/275/2/H431.pdf) versions of the article are available for journal members on the American Journal of Physiology website.) PubMed ID: 9683430 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=9683430&dopt=Abstract)
  //
  // cell diagram
  //
  // A schematic diagram describing the ionic components of the Riemer et al. 1998 mathematical model of a guinea pig ventricular myocyte. The model is based on the Luo-Rudy dynamic model, with an added stretch-activated channel (SAC).
  // Below, we define some additional units for association with variables and
  // constants within the model.
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {pref: milli, expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {pref: milli, expo: -1};
  enddef;
  def unit microS_per_microF as
    unit siemens {pref: micro};
    unit farad {pref: milli, expo: -1};
  enddef;
  def unit milliS_per_cm2 as
    unit siemens {pref: milli};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit nanoS_per_cm2 as
    unit siemens {pref: nano};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {pref: micro, expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {pref: kilo, expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit cm_per_second as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit mm2 as
    unit metre {pref: milli, expo: 2};
  enddef;
  def unit micro_litre as
    unit litre {pref: micro};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {pub: out, init: -86.5};
    var R: joule_per_kilomole_kelvin {pub: out, init: 8314.0};
    var T: kelvin {pub: out, init: 310.0};
    var F: coulomb_per_mole {pub: out, init: 96500.0};
    var Cm: microF {init: 1.0};
    var I_st: microA_per_microF {init: -100.0};
    var time: millisecond {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_Ca_L: microA_per_microF {pub: in};
    var i_Ca_T: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_Kp: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_ns_Ca: microA_per_microF {pub: in};
    var i_s: microA_per_microF {pub: in};
    ode(V, time) = -(1.0{dimensionless}/Cm)*(i_Na+i_Ca_L+i_Ca_T+i_Kr+i_Ks+i_K1+i_Kp+i_NaCa+i_p_Ca+i_Na_b+i_Ca_b+i_NaK+i_ns_Ca+i_s+I_st);
  enddef;

  def comp fast_sodium_current as
    var i_Na: microA_per_microF {pub: out};
    var E_Na: millivolt {pub: out};
    var g_Na: milliS_per_microF {init: 16.0};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*j*(V-E_Na);
    E_Na = R*T/F*ln(Nao/Nai);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {pub: out};
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = 0.32{per_millivolt_millisecond}*(V+47.13{millivolt})/(1.0{dimensionless}-exp(-0.1{per_millivolt}*(V+47.13{millivolt})));
    beta_m = 0.08{per_millisecond}*exp(-V/11.0{millivolt});
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {pub: out};
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = sel
      case V < -40.0{millivolt}:
        0.135{per_millisecond}*exp((80.0{millivolt}+V)/(-6.8{millivolt}));
      otherwise:
        0.0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40.0{millivolt}:
        3.56{per_millisecond}*exp(0.079{millivolt}*V)+310000.0{per_millisecond}*exp(0.35{per_millivolt}*V);
      otherwise:
        1.0{dimensionless}/(0.13{millisecond}*(1.0{dimensionless}+exp(-(V+10.66{millivolt})/11.1{millivolt})));
    endsel;
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  def comp fast_sodium_current_j_gate as
    var j: dimensionless {pub: out};
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_j = sel
      case V < -40.0{millivolt}:
        (-127140.0{per_millivolt_millisecond}*exp(0.2444{per_millivolt}*V)-0.00003474{per_millivolt_millisecond}*exp(-0.04391{per_millivolt}*V))*((V+37.78{millivolt})/(1.0{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt}))));
      otherwise:
        0.0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40.0{millivolt}:
        0.1212{per_millisecond}*exp(-0.01052{per_millivolt}*V)/(1.0{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt})));
      otherwise:
        0.3{per_millisecond}*exp(-0.0000002535{per_millivolt}*V)/(1.0{dimensionless}+exp(-0.1{per_millivolt}*(V+32.0{millivolt})));
    endsel;
    ode(j, time) = alpha_j*(1.0{dimensionless}-j)-beta_j*j;
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L: microA_per_microF {pub: out};
    var i_CaCa: microA_per_microF {pub: out};
    var i_CaK: microA_per_microF {pub: out};
    var i_CaNa: microA_per_microF {pub: out};
    var gamma_Nai: dimensionless {pub: out, init: 0.75};
    var gamma_Nao: dimensionless {pub: out, init: 0.75};
    var gamma_Ki: dimensionless {pub: out, init: 0.75};
    var gamma_Ko: dimensionless {pub: out, init: 0.75};
    var I_CaCa: microA_per_microF;
    var I_CaK: microA_per_microF;
    var I_CaNa: microA_per_microF;
    var P_Ca: cm_per_second {init: 0.00054};
    var P_Na: cm_per_second {init: 0.000000675};
    var P_K: cm_per_second {init: 0.000000193};
    var gamma_Cai: dimensionless {init: 1.0};
    var gamma_Cao: dimensionless {init: 0.34};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Cai: micromolar {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    i_CaCa = d*f*f_Ca*I_CaCa;
    i_CaNa = d*f*f_Ca*I_CaNa;
    i_CaK = d*f*f_Ca*I_CaK;
    I_CaCa = P_Ca*sqr(2.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Cai*Cai*exp(2.0{dimensionless}*V*F/(R*T))-gamma_Cao*Cao)/(exp(2.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    I_CaNa = P_Na*sqr(1.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Nai*Nai*exp(1.0{dimensionless}*V*F/(R*T))-gamma_Nao*Nao)/(exp(1.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    I_CaK = P_K*sqr(1.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Ki*Ki*exp(1.0{dimensionless}*V*F/(R*T))-gamma_Ko*Ko)/(exp(1.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    i_Ca_L = i_CaCa+i_CaK+i_CaNa;
  enddef;

  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {pub: out};
    var alpha_d: per_millisecond;
    var beta_d: per_millisecond;
    var d_infinity: dimensionless;
    var tau_d: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_d = d_infinity/tau_d;
    d_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-((V+10.0{millivolt})/6.24{millivolt})));
    tau_d = d_infinity*((1.0{dimensionless}-exp(-((V+10.0{millivolt})/6.24{millivolt})))/(0.035{per_millivolt_millisecond}*(V+10.0{millivolt})));
    beta_d = (1.0{dimensionless}-d_infinity)/tau_d;
    ode(d, time) = alpha_d*(1.0{dimensionless}-d)-beta_d*d;
  enddef;

  def comp L_type_Ca_channel_f_gate as
    var f: dimensionless {pub: out};
    var alpha_f: per_millisecond;
    var beta_f: per_millisecond;
    var f_infinity: dimensionless;
    var tau_f: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_f = f_infinity/tau_f;
    f_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+35.06{millivolt})/8.6{millivolt}))+0.6{dimensionless}/(1.0{dimensionless}+exp((50.0{millivolt}-V)/20.0{millivolt}));
    tau_f = 1.0{millisecond}/(0.0197{dimensionless}*exp(-sqr(0.0337{per_millivolt}*(V+10.0{millivolt})))+0.02{dimensionless});
    beta_f = (1.0{dimensionless}-f_infinity)/tau_f;
    ode(f, time) = alpha_f*(1.0{dimensionless}-f)-beta_f*f;
  enddef;

  def comp L_type_Ca_channel_f_Ca_gate as
    var f_Ca: dimensionless {pub: out};
    var Km_Ca: micromolar {init: 0.6};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var Cai: micromolar {pub: in};
    f_Ca = 1.0{dimensionless}/(1.0{dimensionless}+Cai/Km_Ca);
  enddef;

  def comp T_type_Ca_channel as
    var i_Ca_T: microA_per_microF {pub: out};
    var g_Ca_T: milliS_per_microF {init: 0.05};
    var E_Ca: millivolt;
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Cai: micromolar {pub: in};
    var Cao: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var b: dimensionless {priv: in};
    var g: dimensionless {priv: in};
    i_Ca_T = g_Ca_T*sqr(b)*g*(V-E_Ca);
    E_Ca = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
  enddef;

  def comp T_type_Ca_channel_b_gate as
    var b: dimensionless {pub: out};
    var b_infinity: dimensionless;
    var tau_b: millisecond;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    ode(b, time) = (b_infinity-b)/tau_b;
    b_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-((V+14.0{millivolt})/10.8{millivolt})));
    tau_b = (3.7{per_millivolt_millisecond}+6.1{per_millivolt_millisecond})/(1.0{dimensionless}+exp((25.0{millivolt}+V)/4.5{millivolt}));
  enddef;

  def comp T_type_Ca_channel_g_gate as
    var g: dimensionless {pub: out};
    var g_infinity: dimensionless;
    var tau_g: millisecond;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    ode(g, time) = (g_infinity-g)/tau_g;
    g_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+60.0{millivolt})/5.6{millivolt}));
    tau_g = sel
      case V > 0.0{millivolt}:
        12.0{millisecond};
      otherwise:
        -0.875{per_millivolt_millisecond}*V+12.0{millisecond};
    endsel;
  enddef;

  def comp rapid_time_dependent_potassium_current as
    var i_Kr: microA_per_microF {pub: out};
    var g_Kr: milliS_per_microF;
    var E_Kr: millivolt;
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Xr: dimensionless {priv: in};
    var Rr: dimensionless {priv: in};
    g_Kr = 0.02614{milliS_per_microF}*sqrt(Ko/5.4{millimolar});
    E_Kr = R*T/F*ln(Ko/Ki);
    i_Kr = g_Kr*Xr*Rr*(V-E_Kr);
  enddef;

  def comp rapid_time_dependent_potassium_current_Xr_gate as
    var Xr: dimensionless {pub: out};
    var Xr_infinity: dimensionless;
    var tau_Xr: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(Xr, time) = (Xr_infinity-Xr)/tau_Xr;
    Xr_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-((V+21.5{millivolt})/7.5{millivolt})));
    tau_Xr = 1.0{dimensionless}/(0.00138{dimensionless}*(V+14.2{millivolt})/(1.0{dimensionless}-exp(-0.123{dimensionless}*(V+14.2{millivolt})))+0.00061{dimensionless}*(V+38.9{millivolt})/(exp(0.145{dimensionless}*(V+38.9{millivolt}))-1.0{dimensionless}));
  enddef;

  def comp rapid_time_dependent_potassium_current_Rr_gate as
    var Rr: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    Rr = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+9.0{millivolt})/22.4{millivolt}));
  enddef;

  def comp slow_time_dependent_potassium_current as
    var i_Ks: microA_per_microF {pub: out};
    var g_Ks: milliS_per_microF;
    var E_Ks: millivolt;
    var P_NaK: dimensionless {init: 0.01833};
    var P_Ca: dimensionless;
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Cai: micromolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Xs: dimensionless {priv: in};
    g_Ks = (0.057{milliS_per_microF}+0.19{milliS_per_microF})/(1.0{dimensionless}+exp((-7.2{dimensionless}+P_Ca)/0.6{dimensionless}));
    E_Ks = R*T/F*ln((Ko+P_NaK*Nao)/(Ki+P_NaK*Nai));
    P_Ca = -log(Cai)+3.0{dimensionless};
    i_Ks = g_Ks*sqr(Xs)*(V-E_Ks);
  enddef;

  def comp slow_time_dependent_potassium_current_Xs_gate as
    var Xs: dimensionless {pub: out};
    var tau_Xs: dimensionless {pub: out};
    var Xs_infinity: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(Xs, time) = (Xs_infinity-Xs)/tau_Xs;
    Xs_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+(-1.5{millivolt}))/16.7{millivolt}));
    tau_Xs = 1.0{dimensionless}/(0.0000719{dimensionless}*(V+30.0{millivolt})/(1.0{dimensionless}-exp(-0.148{dimensionless}*(V+30.0{millivolt})))+0.000131{dimensionless}*(V+30.0{millivolt})/(exp(0.0687{dimensionless}*(V+30.0{millivolt}))-1.0{dimensionless}));
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: microA_per_microF {pub: out};
    var E_K1: millivolt {pub: out, priv: out};
    var g_K1: milliS_per_microF;
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var K1_infinity: dimensionless {priv: in};
    g_K1 = 0.75{milliS_per_microF}*sqrt(Ko/5.4{millimolar});
    E_K1 = R*T/F*ln(Ko/Ki);
    i_K1 = g_K1*K1_infinity*(V-E_K1);
  enddef;

  def comp time_independent_potassium_current_K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: per_millisecond;
    var beta_K1: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E_K1: millivolt {pub: in};
    alpha_K1 = 1.02{per_millisecond}/(1.0{dimensionless}+exp(0.2385{per_millivolt}*(V-E_K1-59.215{millivolt})));
    beta_K1 = (0.49124{per_millisecond}*exp((V+5.476{millivolt}-E_K1)/12.45{millivolt})+exp((V-(E_K1+594.31{millivolt}))/16.2{millivolt}))/(1.0{dimensionless}+exp(-0.5143{per_millivolt}*(V-(E_K1+4.753{millivolt}))));
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
  enddef;

  def comp plateau_potassium_current as
    var i_Kp: microA_per_microF {pub: out};
    var E_Kp: millivolt;
    var g_Kp: milliS_per_microF {init: 0.00552};
    var Kp: dimensionless;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var E_K1: millivolt {pub: in};
    E_Kp = E_K1;
    Kp = 1.0{dimensionless}/(1.0{dimensionless}+exp((7.488{millivolt}-V)/5.98{millivolt}));
    i_Kp = g_Kp*Kp*(V-E_Kp);
  enddef;

  def comp sarcolemmal_calcium_pump as
    var i_p_Ca: microA_per_microF {pub: out};
    var K_mpCa: micromolar {init: 0.5};
    var I_pCa: microA_per_microF {init: 1.15};
    var time: millisecond {pub: in};
    var Cai: micromolar {pub: in};
    i_p_Ca = I_pCa*(Cai/(K_mpCa+Cai));
  enddef;

  def comp sodium_background_current as
    var i_Na_b: microA_per_microF {pub: out};
    var g_Nab: milliS_per_microF {init: 0.00141};
    var E_NaN: millivolt;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    E_NaN = E_Na;
    i_Na_b = g_Nab*(V-E_NaN);
  enddef;

  def comp calcium_background_current as
    var i_Ca_b: microA_per_microF {pub: out};
    var g_Cab: milliS_per_microF {init: 0.003016};
    var E_CaN: millivolt;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cai: micromolar {pub: in};
    var Cao: millimolar {pub: in};
    E_CaN = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V-E_CaN);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: microA_per_microF {pub: out};
    var I_NaK: microA_per_microF;
    var f_NaK: dimensionless;
    var K_mNai: millimolar {init: 10.0};
    var K_mKo: millimolar {init: 1.5};
    var sigma: dimensionless;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*(V*F/(R*T)))+0.0365{dimensionless}*sigma*exp(-(V*F/(R*T))));
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Nao/67.3{dimensionless})-1.0{dimensionless});
    i_NaK = I_NaK*f_NaK*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_mNai/Nai, 1.5{dimensionless})))*(Ko/(Ko+K_mKo));
  enddef;

  def comp non_specific_calcium_activated_current as
    var i_ns_Ca: microA_per_microF {pub: out};
    var i_ns_Na: microA_per_microF {pub: out};
    var i_ns_K: microA_per_microF {pub: out};
    var P_ns_Ca: cm_per_second {init: 1.75E-7};
    var gamma_Nai: dimensionless {pub: in};
    var gamma_Nao: dimensionless {pub: in};
    var gamma_Ki: dimensionless {pub: in};
    var gamma_Ko: dimensionless {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var I_ns_Na: microA_per_microF;
    var I_ns_K: microA_per_microF;
    var K_m_ns_Ca: micromolar {init: 1.2};
    var time: millisecond {pub: in};
    var Cai: micromolar {pub: in};
    var V: millivolt {pub: in};
    i_ns_Na = I_ns_Na*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_m_ns_Ca/Cai, 3.0{dimensionless})));
    i_ns_K = I_ns_K*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_m_ns_Ca/Cai, 3.0{dimensionless})));
    i_ns_Ca = i_ns_Na+i_ns_K;
    I_ns_Na = P_ns_Ca*sqr(1.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Nai*Nai*exp(1.0{dimensionless}*V*F/(R*T))-gamma_Nao*Nao)/(exp(1.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    I_ns_K = P_ns_Ca*sqr(1.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Ki*Ki*exp(1.0{dimensionless}*V*F/(R*T))-gamma_Ko*Ko)/(exp(1.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
  enddef;

  def comp Na_Ca_exchanger as
    var i_NaCa: microA_per_microF {pub: out};
    var K_NaCa: microA_per_microF {init: 2000.0};
    var K_mNa: millimolar {init: 87.5};
    var K_mCa: millimolar {init: 1.38};
    var K_sat: dimensionless {init: 0.1};
    var eta: dimensionless {init: 0.35};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: micromolar {pub: in};
    var Cao: millimolar {pub: in};
    i_NaCa = K_NaCa*(1.0{dimensionless}/(pow(K_mNa, 3.0{dimensionless})+pow(Nao, 3.0{dimensionless})))*(1.0{dimensionless}/(K_mCa+Cao))*(1.0{dimensionless}/(1.0{dimensionless}+K_sat*exp((eta-1.0{dimensionless})*V*(F/(R*T)))))*(exp(eta*V*(F/(R*T)))*pow(Nai, 3.0{dimensionless})*Cao-exp((eta-1.0{dimensionless})*V*(F/(R*T)))*pow(Nao, 3.0{dimensionless})*Cai);
  enddef;

  def comp stretch_activated_current as
    var i_s: microA_per_microF {pub: out};
    var g_s: microS_per_microF;
    var E_s: millivolt {init: -20.0};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    i_s = g_s*(V-E_s);
  enddef;

  def comp calcium_buffers_in_the_myoplasm as
    var Ca_JSR_new: millimolar {pub: out};
    var Cai: micromolar {pub: out, init: 0.1784};
    var K_mTRPN: micromolar {init: 0.5};
    var K_mCMDN: micromolar {init: 2.38};
    var TRPN_max: micromolar {init: 70.0};
    var CMDN_max: micromolar {init: 50.0};
    var TRPN_buff: micromolar;
    var CMDN_buff: micromolar;
    var Ca_total: micromolar;
    var Ca_JSR_old: millimolar;
    var delta_Ca_JSR: millimolar;
    var delta_Cai: millimolar;
    var Cai_old: millimolar;
    var b1: dimensionless;
    var c1: dimensionless;
    var b: dimensionless;
    var c: dimensionless;
    var d: dimensionless;
    var time: millisecond {pub: in};
    var CSQN_max: micromolar {pub: in};
    var K_mCSQN: micromolar {pub: in};
    var CSQN_buff: micromolar {pub: in};
    TRPN_buff = TRPN_max*(Cai/(Cai+K_mTRPN));
    CMDN_buff = CMDN_max*(Cai/(Cai+K_mCMDN));
    Ca_JSR_new = (sqrt(sqr(b1)+4.0{dimensionless}*c1)-b1)/2.0{dimensionless};
    delta_Ca_JSR = Ca_JSR_old-Ca_JSR_new;
    delta_Cai = Cai_old-Cai;
    b1 = K_mCSQN-(CSQN_max+CSQN_buff+delta_Ca_JSR+Ca_JSR_old);
    c1 = K_mCSQN*(CSQN_buff+delta_Ca_JSR+Ca_JSR_old);
    Cai = 2.0{dimensionless}/3.0{dimensionless}*sqrt(sqr(b)-3.0{dimensionless}*c)*cos(acos((9.0{dimensionless}*b*c-(2.0{dimensionless}*pow(b, 3.0{dimensionless})+27.0{dimensionless}*d))/(2.0{dimensionless}*pow(sqr(b)-3.0{dimensionless}*c, 3.0{dimensionless}/2.0{dimensionless})))/3.0{dimensionless})-b/3.0{dimensionless};
    b = CMDN_max+TRPN_max+K_mTRPN+K_mCMDN-Ca_total;
    c = K_mCMDN*K_mTRPN+TRPN_max*K_mCMDN+CMDN_max*K_mTRPN-Ca_total*(K_mTRPN+K_mCMDN);
    d = -(K_mTRPN*K_mCMDN)*Ca_total;
    Ca_total = TRPN_buff+CMDN_buff+delta_Cai+Cai_old;
  enddef;

  def comp calcium_fluxes_in_the_SR as
    var i_rel: millimolar_per_millisecond {pub: out};
    var i_up: millimolar_per_millisecond {pub: out};
    var i_leak: millimolar_per_millisecond {pub: out};
    var i_tr: millimolar_per_millisecond {pub: out};
    var CSQN_buff: millimolar {pub: out};
    var CSQN_max: millimolar {pub: out, init: 10.0};
    var K_mCSQN: millimolar {pub: out, init: 0.8};
    var G_rel: per_millisecond;
    var G_rel_max: per_millisecond;
    var tau_on: millisecond {init: 2.0};
    var tau_off: millisecond {init: 2.0};
    var tau_tr: millisecond {init: 180.0};
    var t: millisecond {init: 0.0};
    var K_mrel: micromolar {init: 0.8};
    var delta_Ca_i2: micromolar;
    var delta_Ca_ith: micromolar {init: 0.18};
    var CSQN_th: millimolar {init: 0.7};
    var K_mup: micromolar {init: 0.92};
    var K_leak: per_millisecond;
    var I_up: millimolar_per_millisecond {init: 0.005};
    var Ca_NSR_max: millimolar {init: 0.15};
    var calcium_overload: dimensionless;
    var time: millisecond {pub: in};
    var Cai: micromolar {pub: in};
    var Ca_JSR_new: millimolar {pub: in};
    var Ca_NSR: millimolar {pub: in};
    i_rel = G_rel*(Ca_JSR_new-Cai);
    G_rel = sel
      case calcium_overload == 0.0{dimensionless}:
        G_rel_max*((delta_Ca_i2-delta_Ca_ith)/(K_mrel+delta_Ca_i2-delta_Ca_ith))*(1.0{dimensionless}-exp(-(t/tau_on)))*exp(-(t/tau_off));
      otherwise:
        G_rel_max*(1.0{dimensionless}-exp(-(t/tau_on)))*exp(-(t/tau_off));
    endsel;
    G_rel_max = sel
      case calcium_overload == 0.0{dimensionless}:
        sel(case delta_Ca_i2 < delta_Ca_ith: 0.0{per_millisecond}, otherwise: 60.0{per_millisecond});
      otherwise:
        sel(case CSQN_buff < CSQN_th: 0.0{per_millisecond}, otherwise: 4.0{per_millisecond});
    endsel;
    CSQN_buff = CSQN_max*(Ca_JSR_new/(Ca_JSR_new+K_mCSQN));
    i_up = I_up*(Cai/(Cai+K_mup));
    i_leak = K_leak*Ca_NSR;
    K_leak = I_up/Ca_NSR_max;
    i_tr = (Ca_NSR-Ca_JSR_new)/tau_tr;
  enddef;

  def comp ionic_concentrations as
    var Nai: millimolar {pub: out, init: 18.0};
    var Nao: millimolar {pub: out, init: 140.0};
    var Cao: millimolar {pub: out, init: 1.8};
    var Ki: millimolar {pub: out, init: 145.0};
    var Ko: millimolar {pub: out, init: 5.4};
    var Ca_NSR: millimolar {pub: out, init: 15.0};
    var Ca_foot: micromolar;
    var A_cap: mm2 {init: 0.000153};
    var R_A_V: dimensionless;
    var V_myo: micro_litre;
    var V_cleft: micro_litre;
    var time: millisecond {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_CaNa: microA_per_microF {pub: in};
    var i_CaCa: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    var i_ns_Na: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_CaK: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_Kp: microA_per_microF {pub: in};
    var i_ns_K: microA_per_microF {pub: in};
    var i_tr: millimolar_per_millisecond {pub: in};
    var i_leak: millimolar_per_millisecond {pub: in};
    var i_up: millimolar_per_millisecond {pub: in};
    ode(Nai, time) = -(i_Na+i_CaNa+i_Na_b+i_ns_Na+i_NaCa*3.0{dimensionless}+i_NaK*3.0{dimensionless})*(A_cap/(V_myo*F));
    ode(Ki, time) = -(i_CaK+i_Kr+i_Ks+i_K1+i_Kp+i_ns_K+(-(i_NaK*2.0{dimensionless})))*(A_cap/(V_myo*F));
    ode(Ko, time) = (i_CaK+i_Kr+i_Ks+i_K1+i_Kp+i_ns_K+(-(i_NaK*2.0{dimensionless})))*(A_cap/(V_cleft*F));
    ode(Ca_NSR, time) = -(i_leak+i_tr-i_up);
    ode(Ca_foot, time) = -i_CaCa*(A_cap/(2.0{dimensionless}*V_myo*F))*R_A_V;
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_gate;
        comp L_type_Ca_channel_f_gate;
        comp L_type_Ca_channel_f_Ca_gate;
      endcomp;
      comp T_type_Ca_channel incl
        comp T_type_Ca_channel_b_gate;
        comp T_type_Ca_channel_g_gate;
      endcomp;
      comp rapid_time_dependent_potassium_current incl
        comp rapid_time_dependent_potassium_current_Xr_gate;
        comp rapid_time_dependent_potassium_current_Rr_gate;
      endcomp;
      comp slow_time_dependent_potassium_current incl
        comp slow_time_dependent_potassium_current_Xs_gate;
      endcomp;
      comp time_independent_potassium_current incl
        comp time_independent_potassium_current_K1_gate;
      endcomp;
      comp Na_Ca_exchanger;
      comp plateau_potassium_current;
      comp sarcolemmal_calcium_pump;
      comp sodium_background_current;
      comp calcium_background_current;
      comp sodium_potassium_pump;
      comp stretch_activated_current;
      comp non_specific_calcium_activated_current;
      comp ionic_concentrations;
      comp calcium_buffers_in_the_myoplasm;
      comp calcium_fluxes_in_the_SR;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
      comp L_type_Ca_channel_f_Ca_gate;
    endcomp;
    comp T_type_Ca_channel incl
      comp T_type_Ca_channel_b_gate;
      comp T_type_Ca_channel_g_gate;
    endcomp;
    comp rapid_time_dependent_potassium_current incl
      comp rapid_time_dependent_potassium_current_Xr_gate;
      comp rapid_time_dependent_potassium_current_Rr_gate;
    endcomp;
    comp slow_time_dependent_potassium_current incl
      comp slow_time_dependent_potassium_current_Xs_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between rapid_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between plateau_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between stretch_activated_current and environment for
    vars time and time;
  enddef;
  def map between non_specific_calcium_activated_current and environment for
    vars time and time;
  enddef;
  def map between ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between calcium_buffers_in_the_myoplasm and environment for
    vars time and time;
  enddef;
  def map between calcium_fluxes_in_the_SR and environment for
    vars time and time;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and T_type_Ca_channel for
    vars V and V;
    vars i_Ca_T and i_Ca_T;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and rapid_time_dependent_potassium_current for
    vars V and V;
    vars i_Kr and i_Kr;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and slow_time_dependent_potassium_current for
    vars V and V;
    vars i_Ks and i_Ks;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and stretch_activated_current for
    vars V and V;
    vars i_s and i_s;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and non_specific_calcium_activated_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_ns_Ca and i_ns_Ca;
  enddef;
  def map between membrane and ionic_concentrations for
    vars F and F;
  enddef;
  def map between fast_sodium_current and ionic_concentrations for
    vars i_Na and i_Na;
    vars Nao and Nao;
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_Ca_channel and ionic_concentrations for
    vars Cao and Cao;
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_CaNa and i_CaNa;
    vars i_CaCa and i_CaCa;
    vars i_CaK and i_CaK;
  enddef;
  def map between L_type_Ca_channel and calcium_buffers_in_the_myoplasm for
    vars Cai and Cai;
  enddef;
  def map between T_type_Ca_channel and ionic_concentrations for
    vars Cao and Cao;
  enddef;
  def map between T_type_Ca_channel and calcium_buffers_in_the_myoplasm for
    vars Cai and Cai;
  enddef;
  def map between rapid_time_dependent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_Kr and i_Kr;
  enddef;
  def map between slow_time_dependent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_Ks and i_Ks;
  enddef;
  def map between slow_time_dependent_potassium_current and calcium_buffers_in_the_myoplasm for
    vars Cai and Cai;
  enddef;
  def map between Na_Ca_exchanger and ionic_concentrations for
    vars Nai and Nai;
    vars Cao and Cao;
    vars Nao and Nao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger and calcium_buffers_in_the_myoplasm for
    vars Cai and Cai;
  enddef;
  def map between time_independent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K1 and i_K1;
  enddef;
  def map between plateau_potassium_current and time_independent_potassium_current for
    vars E_K1 and E_K1;
  enddef;
  def map between plateau_potassium_current and ionic_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between sarcolemmal_calcium_pump and calcium_buffers_in_the_myoplasm for
    vars Cai and Cai;
  enddef;
  def map between sodium_background_current and ionic_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and ionic_concentrations for
    vars Cao and Cao;
  enddef;
  def map between calcium_background_current and calcium_buffers_in_the_myoplasm for
    vars Cai and Cai;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars i_NaK and i_NaK;
  enddef;
  def map between non_specific_calcium_activated_current and ionic_concentrations for
    vars Cao and Cao;
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_ns_Na and i_ns_Na;
    vars i_ns_K and i_ns_K;
  enddef;
  def map between L_type_Ca_channel and non_specific_calcium_activated_current for
    vars gamma_Nao and gamma_Nao;
    vars gamma_Nai and gamma_Nai;
    vars gamma_Ko and gamma_Ko;
    vars gamma_Ki and gamma_Ki;
  enddef;
  def map between non_specific_calcium_activated_current and calcium_buffers_in_the_myoplasm for
    vars Cai and Cai;
  enddef;
  def map between calcium_fluxes_in_the_SR and calcium_buffers_in_the_myoplasm for
    vars Cai and Cai;
    vars Ca_JSR_new and Ca_JSR_new;
    vars CSQN_max and CSQN_max;
    vars K_mCSQN and K_mCSQN;
    vars CSQN_buff and CSQN_buff;
  enddef;
  def map between calcium_fluxes_in_the_SR and ionic_concentrations for
    vars i_tr and i_tr;
    vars i_leak and i_leak;
    vars i_up and i_up;
    vars Ca_NSR and Ca_NSR;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars time and time;
    vars Cai and Cai;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_b_gate for
    vars b and b;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_g_gate for
    vars g and g;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Xr_gate for
    vars Xr and Xr;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Rr_gate for
    vars Rr and Rr;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_time_dependent_potassium_current and slow_time_dependent_potassium_current_Xs_gate for
    vars Xs and Xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars K1_infinity and K1_infinity;
    vars E_K1 and E_K1;
    vars time and time;
    vars V and V;
  enddef;
enddef;
