<?xml version="1.0"?>
<!--
This CellML file was generated on 10/21/2011 at 3:23:36 at PM using:

COR (0.9.31.1409)
Copyright 2002-2011 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="becker_2010c" name="becker_2010c">








   <units name="picomole">
      <unit prefix="pico" units="mole"/>
   </units>
   <units name="picomolar">
      <unit units="picomole"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="minute">
      <unit multiplier="60" units="second"/>
   </units>
   <units name="per_minute">
      <unit exponent="-1" units="minute"/>
   </units>
   <units name="per_picomolar_per_minute">
      <unit exponent="-1" units="picomolar"/>
      <unit exponent="-1" units="minute"/>
   </units>
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="minute"/>
   </component>
   <component name="x_7">
      <variable cmeta:id="x_7_x_7" initial_value="76" name="x_7" public_interface="out" units="picomolar"/>
      <variable name="k_t" public_interface="in" units="per_minute"/>
      <variable name="B_maxSAv" public_interface="in" units="picomolar"/>
      <variable name="k_onSAv" public_interface="in" units="per_picomolar_per_minute"/>
      <variable name="x_8" public_interface="in" units="picomolar"/>
      <variable name="k_offSAv" public_interface="in" units="per_minute"/>
      <variable name="x_9" public_interface="in" units="picomolar"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x_7</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <times/>
                        <ci>k_t</ci>
                        <ci>B_maxSAv</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>k_t</ci>
                        <ci>x_7</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k_onSAv</ci>
                     <ci>x_7</ci>
                     <ci>x_8</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>k_offSAv</ci>
                  <ci>x_9</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="x_8">
      <variable cmeta:id="x_8_x_8" initial_value="999.293" name="x_8" public_interface="out" units="picomolar"/>
      <variable name="k_onSAv" public_interface="in" units="per_picomolar_per_minute"/>
      <variable name="x_7" public_interface="in" units="picomolar"/>
      <variable name="k_offSAv" public_interface="in" units="per_minute"/>
      <variable name="x_9" public_interface="in" units="picomolar"/>
      <variable name="k_exSAv" public_interface="in" units="per_minute"/>
      <variable name="x_10" public_interface="in" units="picomolar"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x_8</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <ci>k_onSAv</ci>
                  </apply>
                  <ci>x_7</ci>
                  <ci>x_8</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k_offSAv</ci>
                  <ci>x_9</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k_exSAv</ci>
                  <ci>x_10</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="x_9">
      <variable cmeta:id="x_9_x_9" initial_value="0" name="x_9" public_interface="out" units="picomolar"/>
      <variable name="k_onSAv" public_interface="in" units="per_picomolar_per_minute"/>
      <variable name="k_offSAv" public_interface="in" units="per_minute"/>
      <variable name="x_8" public_interface="in" units="picomolar"/>
      <variable name="x_7" public_interface="in" units="picomolar"/>
      <variable name="k_t" public_interface="in" units="per_minute"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x_9</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <times/>
                     <ci>k_onSAv</ci>
                     <ci>x_7</ci>
                     <ci>x_8</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k_offSAv</ci>
                     <ci>x_9</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>k_t</ci>
                  <ci>x_9</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="x_10">
      <variable cmeta:id="x_10_x_10" initial_value="0" name="x_10" public_interface="out" units="picomolar"/>
      <variable name="k_t" public_interface="in" units="per_minute"/>
      <variable name="k_di" public_interface="in" units="per_minute"/>
      <variable name="k_de" public_interface="in" units="per_minute"/>
      <variable name="x_9" public_interface="in" units="picomolar"/>
      <variable name="k_exSAv" public_interface="in" units="per_minute"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x_10</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <times/>
                        <ci>k_t</ci>
                        <ci>x_9</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>k_exSAv</ci>
                        <ci>x_10</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k_di</ci>
                     <ci>x_10</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>k_de</ci>
                  <ci>x_10</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="x_11">
      <variable cmeta:id="x_11_x_11" initial_value="0" name="x_11" public_interface="out" units="picomolar"/>
      <variable name="k_di" public_interface="in" units="per_minute"/>
      <variable name="x_10" public_interface="in" units="picomolar"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x_11</ci>
            </apply>
            <apply>
               <times/>
               <ci>k_di</ci>
               <ci>x_10</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="x_12">
      <variable cmeta:id="x_12_x_12" initial_value="0" name="x_12" public_interface="out" units="picomolar"/>
      <variable name="k_de" public_interface="in" units="per_minute"/>
      <variable name="x_10" public_interface="in" units="picomolar"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x_12</ci>
            </apply>
            <apply>
               <times/>
               <ci>k_de</ci>
               <ci>x_10</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="model_parameters">
      <variable initial_value="0.03294" name="k_t" public_interface="out" units="per_minute"/>
      <variable initial_value="2.294e-6" name="k_onSAv" public_interface="out" units="per_picomolar_per_minute"/>
      <variable initial_value="0.006799" name="k_offSAv" public_interface="out" units="per_minute"/>
      <variable initial_value="0.011" name="k_exSAv" public_interface="out" units="per_minute"/>
      <variable initial_value="0.003179" name="k_di" public_interface="out" units="per_minute"/>
      <variable initial_value="0.0164" name="k_de" public_interface="out" units="per_minute"/>
      <variable initial_value="129" name="B_maxSAv" public_interface="out" units="picomolar"/>
   </component>
   <connection>
      <map_components component_1="environment" component_2="x_7"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="x_8"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="x_9"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="x_10"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="x_11"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="x_12"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="x_7"/>
      <map_variables variable_1="k_t" variable_2="k_t"/>
      <map_variables variable_1="k_onSAv" variable_2="k_onSAv"/>
      <map_variables variable_1="k_offSAv" variable_2="k_offSAv"/>
      <map_variables variable_1="B_maxSAv" variable_2="B_maxSAv"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="x_8"/>
      <map_variables variable_1="k_onSAv" variable_2="k_onSAv"/>
      <map_variables variable_1="k_offSAv" variable_2="k_offSAv"/>
      <map_variables variable_1="k_exSAv" variable_2="k_exSAv"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="x_9"/>
      <map_variables variable_1="k_onSAv" variable_2="k_onSAv"/>
      <map_variables variable_1="k_offSAv" variable_2="k_offSAv"/>
      <map_variables variable_1="k_t" variable_2="k_t"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="x_10"/>
      <map_variables variable_1="k_exSAv" variable_2="k_exSAv"/>
      <map_variables variable_1="k_t" variable_2="k_t"/>
      <map_variables variable_1="k_de" variable_2="k_de"/>
      <map_variables variable_1="k_di" variable_2="k_di"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="x_11"/>
      <map_variables variable_1="k_di" variable_2="k_di"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="x_12"/>
      <map_variables variable_1="k_de" variable_2="k_de"/>
   </connection>
   <connection>
      <map_components component_1="x_7" component_2="x_8"/>
      <map_variables variable_1="x_7" variable_2="x_7"/>
      <map_variables variable_1="x_8" variable_2="x_8"/>
   </connection>
   <connection>
      <map_components component_1="x_7" component_2="x_9"/>
      <map_variables variable_1="x_7" variable_2="x_7"/>
      <map_variables variable_1="x_9" variable_2="x_9"/>
   </connection>
   <connection>
      <map_components component_1="x_8" component_2="x_9"/>
      <map_variables variable_1="x_9" variable_2="x_9"/>
      <map_variables variable_1="x_8" variable_2="x_8"/>
   </connection>
   <connection>
      <map_components component_1="x_8" component_2="x_10"/>
      <map_variables variable_1="x_10" variable_2="x_10"/>
   </connection>
   <connection>
      <map_components component_1="x_9" component_2="x_10"/>
      <map_variables variable_1="x_9" variable_2="x_9"/>
   </connection>
   <connection>
      <map_components component_1="x_10" component_2="x_11"/>
      <map_variables variable_1="x_10" variable_2="x_10"/>
   </connection>
   <connection>
      <map_components component_1="x_10" component_2="x_12"/>
      <map_variables variable_1="x_10" variable_2="x_10"/>
   </connection>
<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
<rdf:Description rdf:nodeID="n1">
<rdf:type>
<rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/>
</rdf:type>
<rdf:value xml:lang="en">hnie010@aucklanduni.ac.nz</rdf:value>
</rdf:Description>
<rdf:Description rdf:nodeID="n2">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n3"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n4">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n5"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n6">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n7"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n8">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Bachmann</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">J</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n9">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Becker</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">V</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n10">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n2"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n11">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n12"/>
</N>
<ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n13"/>
</ORG>
<EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n1"/>
</EMAIL>
</rdf:Description>
<rdf:Description rdf:nodeID="n14">
<Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en"> 20488988 </Pubmed_id>
<JournalArticle xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n15"/>
</JournalArticle>
</rdf:Description>
<rdf:Description rdf:nodeID="n12">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Nielsen</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Hanne</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n16">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Timmer</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">J</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">F</Other>
</rdf:Description>
<rdf:Description rdf:nodeID="n17">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
</rdf:type>
<rdf:_4>
<rdf:Description rdf:nodeID="n10"/>
</rdf:_4>
<rdf:_2>
<rdf:Description rdf:nodeID="n6"/>
</rdf:_2>
<rdf:_1>
<rdf:Description rdf:nodeID="n18"/>
</rdf:_1>
<rdf:_3>
<rdf:Description rdf:nodeID="n19"/>
</rdf:_3>
<rdf:_8>
<rdf:Description rdf:nodeID="n4"/>
</rdf:_8>
<rdf:_7>
<rdf:Description rdf:nodeID="n20"/>
</rdf:_7>
<rdf:_5>
<rdf:Description rdf:nodeID="n21"/>
</rdf:_5>
<rdf:_6>
<rdf:Description rdf:nodeID="n22"/>
</rdf:_6>
</rdf:Description>
<rdf:Description rdf:nodeID="n23">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2011-10-18</W3CDTF>
</rdf:Description>
<rdf:Description rdf:nodeID="n24">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2011-10-18</W3CDTF>
</rdf:Description>
<rdf:Description rdf:nodeID="n3">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Baumann</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">U</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n25">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Maiwald</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">T</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">F</Other>
</rdf:Description>
<rdf:Description rdf:nodeID="n26">
<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">300</endingValue>
</rdf:Description>
<rdf:Description rdf:about="#becker_2010c">
<simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n27"/>
</simulation>
</rdf:Description>
<rdf:Description rdf:nodeID="n28">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n8"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n29">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n30"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n31">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Klingmuller</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">U</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">F</Other>
</rdf:Description>
<rdf:Description rdf:nodeID="n32">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n25"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n33">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/>
</rdf:type>
<rdf:_4 xml:lang="en">ligand</rdf:_4>
<rdf:_2 xml:lang="en">liver</rdf:_2>
<rdf:_1 xml:lang="en">hepatology</rdf:_1>
<rdf:_3 xml:lang="en">hepatocyte</rdf:_3>
</rdf:Description>
<rdf:Description rdf:nodeID="n34">
<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n35"/>
</boundIntervals>
</rdf:Description>
<rdf:Description rdf:nodeID="n18">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n36"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n37">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Schilling</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">M</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Z</Other>
</rdf:Description>
<rdf:Description rdf:nodeID="n38">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n16"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n39">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Science</title>
</rdf:Description>
<rdf:Description rdf:nodeID="n15">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n17"/>
</creator>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
          Covering a broad dynamic range: information processing at the erythropoietin receptor
          </title><issued xmlns="http://purl.org/dc/terms/"><rdf:Description rdf:nodeID="n23"/></issued><Journal xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n39"/></Journal><volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">328(5984)</volume><first_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">1404</first_page><last_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">1408</last_page></rdf:Description><rdf:Description rdf:nodeID="n40"><endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">300</endingValue></rdf:Description><rdf:Description rdf:nodeID="n20"><Person xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n38"/></Person></rdf:Description><rdf:Description rdf:nodeID="n5"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n31"/></N></rdf:Description><rdf:Description rdf:nodeID="n41"><subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type><rdf:value><rdf:Description rdf:nodeID="n33"/></rdf:value></rdf:Description><rdf:Description rdf:nodeID="n21"><Person xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n29"/></Person></rdf:Description><rdf:Description rdf:nodeID="n22"><Person xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n32"/></Person></rdf:Description><rdf:Description rdf:nodeID="n27"><boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#"><rdf:Description rdf:nodeID="n42"/></boundIntervals></rdf:Description><rdf:Description rdf:nodeID="n43"><subject xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:nodeID="n41"/></subject></rdf:Description><rdf:Description rdf:about=""><creator xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:nodeID="n11"/></creator><created xmlns="http://purl.org/dc/terms/"><rdf:Description rdf:nodeID="n24"/></created></rdf:Description><rdf:Description rdf:nodeID="n7"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n37"/></N></rdf:Description><rdf:Description rdf:about="#becker_2010"><simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#"><rdf:Description rdf:nodeID="n34"/></simulation></rdf:Description><rdf:Description rdf:nodeID="n36"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n9"/></N></rdf:Description><rdf:Description rdf:nodeID="n35"><rdf:first><rdf:Description rdf:nodeID="n26"/></rdf:first><rdf:rest><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/></rdf:rest></rdf:Description><rdf:Description rdf:nodeID="n19"><Person xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n28"/></Person></rdf:Description><rdf:Description rdf:nodeID="n42"><rdf:first><rdf:Description rdf:nodeID="n40"/></rdf:first><rdf:rest><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/></rdf:rest></rdf:Description><rdf:Description rdf:nodeID="n13"><Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The University of Auckland</Orgname><Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Auckland Bioengineering Institute</Orgunit></rdf:Description><rdf:Description rdf:about="#becker_2010c"><cmeta:species xml:lang="en">Human</cmeta:species><cmeta:bio_entity xml:lang="en">hepatocyte</cmeta:bio_entity><cmeta:bio_entity xml:lang="en">Liver</cmeta:bio_entity><reference xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n43"/></reference><reference xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n14"/></reference></rdf:Description><rdf:Description rdf:nodeID="n30"><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Raue</Family><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">A</Given><Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">F</Other></rdf:Description></rdf:RDF></model>