<?xml version="1.0"?>
<!--
This CellML file was generated on 8/4/2011 at 10:19:16 at AM using:

COR (0.9.31.1409)
Copyright 2002-2011 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="cardenas_1996" name="cardenas_1996">

<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
  <rdf:Description rdf:about="">
    <dc:creator rdf:parseType="Resource">
      <vCard:N rdf:parseType="Resource">
        <vCard:Family>Nielsen</vCard:Family>
        <vCard:Given>Hanne</vCard:Given>
              </vCard:N>
      <vCard:EMAIL rdf:parseType="Resource">
        <rdf:value>hnie010@aucklanduni.ac.nz</rdf:value>
        <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
      </vCard:EMAIL>
      <vCard:ORG rdf:parseType="Resource">
        <vCard:Orgname>The University of Auckland</vCard:Orgname>
        <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
      </vCard:ORG>
    </dc:creator>
    <dcterms:created rdf:parseType="Resource">
      <dcterms:W3CDTF>2011-08-09</dcterms:W3CDTF>
    </dcterms:created>
  </rdf:Description>
  <rdf:Description rdf:about="#cardenas_1996">
    <cmeta:species>Human</cmeta:species>
    <cmeta:bio_entity>Liver</cmeta:bio_entity>
    <cmeta:bio_entity>hepatocyte</cmeta:bio_entity>
    <bqs:reference rdf:parseType="Resource">
      <dc:subject rdf:parseType="Resource">
        <bqs:subject_type>keyword</bqs:subject_type>
        <rdf:value>
          <rdf:Bag>
            <rdf:li>liver</rdf:li>
            <rdf:li>hepatology</rdf:li>
 <rdf:li>hepatolocyte</rdf:li>
          </rdf:Bag>
        </rdf:value>
      </dc:subject>
    </bqs:reference>
    <bqs:reference rdf:parseType="Resource">
      <bqs:Pubmed_id>14871603</bqs:Pubmed_id>
      <bqs:JournalArticle rdf:parseType="Resource">
        <dc:creator>
          <rdf:Seq>
            <rdf:li rdf:parseType="Resource">
              <bqs:Person rdf:parseType="Resource">
                <vCard:N rdf:parseType="Resource">
                  <vCard:Family>Cardenas</vCard:Family>
                  <vCard:Given>Maria</vCard:Given>
                  <vCard:Other>Luz</vCard:Other>
                </vCard:N>
              </bqs:Person>
            </rdf:li>
            <rdf:li rdf:parseType="Resource">
              <bqs:Person rdf:parseType="Resource">
                <vCard:N rdf:parseType="Resource">
                  <vCard:Family>Goldbeter</vCard:Family>
                  <vCard:Given>Albert</vCard:Given>
                </vCard:N>
              </bqs:Person>
            </rdf:li>
                      </rdf:Seq>
        </dc:creator>
        <dc:title>
            The Glucose-induced Switch Between Glycogen Phosphorylase and Glycogen Synthase in the Liver: Outlines of a Theoretical Approach          </dc:title>
        <dcterms:issued rdf:parseType="Resource">
          <dcterms:W3CDTF>1996</dcterms:W3CDTF>
        </dcterms:issued>
        <bqs:Journal rdf:parseType="Resource">
          <dc:title>Journal of Theoretical Biology</dc:title>
        </bqs:Journal>
        <bqs:volume>182</bqs:volume>
        <bqs:first_page>421</bqs:first_page>
        <bqs:last_page>426</bqs:last_page>
      </bqs:JournalArticle>
    </bqs:reference>
  </rdf:Description>
</rdf:RDF>




   <units name="millimole">
      <unit prefix="milli" units="mole"/>
   </units>
   <units name="millimolar">
      <unit units="millimole"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="minute">
      <unit multiplier="60" units="second"/>
   </units>
   <units name="per_minute">
      <unit exponent="-1" units="minute"/>
   </units>
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="minute"/>
   </component>
   <component name="Pha">
      <variable cmeta:id="Pha_Pha" initial_value="0.845" name="Pha" public_interface="out" units="millimolar"/>
      <variable initial_value="1.25" name="V_1" units="per_minute"/>
      <variable initial_value="0.1" name="K_1" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.2" name="K_2" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.22" name="V_M2" units="per_minute"/>
      <variable initial_value="9" name="alpha" units="dimensionless"/>
      <variable initial_value="32.5" name="GLC" units="millimolar"/>
      <variable initial_value="10" name="K_a1" units="millimolar"/>
      <variable initial_value="10" name="K_a2" units="millimolar"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Pha</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>V_1</ci>
                     <apply>
                        <minus/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                        <ci>Pha</ci>
                     </apply>
                  </apply>
                  <apply>
                     <minus/>
                     <apply>
                        <plus/>
                        <ci>K_1</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     </apply>
                     <ci>Pha</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>V_M2</ci>
<ci>Pha</ci>
                     <apply>
                        <plus/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                        <apply>
                           <divide/>
                           <apply>
                              <times/>
                              <ci>alpha</ci>
                              <ci>GLC</ci>
                           </apply>
                           <apply>
                              <plus/>
                              <ci>K_a1</ci>
                              <ci>GLC</ci>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <apply>
                        <divide/>
                        <ci>K_2</ci>
                        <apply>
                           <plus/>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                           <apply>
                              <divide/>
                              <ci>GLC</ci>
                              <ci>K_a2</ci>
                           </apply>
                        </apply>
                     </apply>
                     <ci>Pha</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="GSa">
      <variable cmeta:id="GSa_GSa" initial_value="0.02" name="GSa" units="millimolar"/>
      <variable name="Pha" public_interface="in" units="millimolar"/>
      <variable initial_value="0.05" name="V_M3" units="per_minute"/>
      <variable initial_value="9" name="beta" units="dimensionless"/>
      <variable initial_value="0.4" name="G6P" units="millimolar"/>
      <variable initial_value="0.5" name="K_a3" units="millimolar"/>
      <variable name="K_1" public_interface="in" units="dimensionless"/>
      <variable initial_value="0.4" name="K_3" units="dimensionless"/>
      <variable initial_value="0.4" name="K_4" units="dimensionless"/>
      <variable initial_value="0.5" name="K_a4" units="millimolar"/>
      <variable initial_value="0.2" name="V_4" units="per_minute"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>GSa</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>V_M3</ci>
                     <apply>
                        <plus/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                        <apply>
                           <divide/>
                           <apply>
                              <times/>
                              <ci>beta</ci>
                              <ci>G6P</ci>
                           </apply>
                           <apply>
                              <plus/>
                              <ci>K_a3</ci>
                              <ci>G6P</ci>
                           </apply>
                        </apply>
                     </apply>
                     <apply>
                        <divide/>
                        <ci>K_1</ci>
                        <apply>
                           <plus/>
                           <ci>K_1</ci>
                           <ci>Pha</ci>
                        </apply>
                     </apply>
                     <apply>
                        <minus/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                        <ci>GSa</ci>
                     </apply>
                  </apply>
                  <apply>
                     <minus/>
                     <apply>
                        <plus/>
                        <apply>
                           <divide/>
                           <ci>K_3</ci>
                           <apply>
                              <plus/>
                              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                              <apply>
                                 <divide/>
                                 <ci>G6P</ci>
                                 <ci>K_a4</ci>
                              </apply>
                           </apply>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     </apply>
                     <ci>GSa</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>V_4</ci>
                     <ci>GSa</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>K_4</ci>
                     <apply>
                        <times/>
                        <ci>GSa</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_minute">1</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="environment" component_2="Pha"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="GSa"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="Pha" component_2="GSa"/>
      <map_variables variable_1="K_1" variable_2="K_1"/>
      <map_variables variable_1="Pha" variable_2="Pha"/>
   </connection>
<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
<rdf:Description rdf:nodeID="n1">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n2"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n3">
<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n4"/>
</boundIntervals>
</rdf:Description>
<rdf:Description rdf:nodeID="n5">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Journal of Theoretical Biology</title>
</rdf:Description>
<rdf:Description rdf:about="#cardenas_1996">
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n6"/>
</reference>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n7"/>
</reference>
<cmeta:species xml:lang="en">Human</cmeta:species>
<cmeta:bio_entity xml:lang="en">Liver</cmeta:bio_entity>
<cmeta:bio_entity xml:lang="en">hepatocyte</cmeta:bio_entity>
<simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n3"/>
</simulation>
</rdf:Description>
<rdf:Description rdf:about="">
<created xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:nodeID="n8"/>
</created>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n9"/>
</creator>
</rdf:Description>
<rdf:Description rdf:nodeID="n7">
<subject xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n10"/>
</subject>
</rdf:Description>
<rdf:Description rdf:nodeID="n11">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Nielsen</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Hanne</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n4">
<rdf:rest>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
</rdf:rest>
<rdf:first>
<rdf:Description rdf:nodeID="n12"/>
</rdf:first>
</rdf:Description>
<rdf:Description rdf:nodeID="n13">
<Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The University of Auckland</Orgname>
<Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Auckland Bioengineering Institute</Orgunit>
</rdf:Description>
<rdf:Description rdf:nodeID="n14">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2011-08-04</W3CDTF>
</rdf:Description>
<rdf:Description rdf:nodeID="n9">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n11"/>
</N>
<EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n15"/>
</EMAIL>
<ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n13"/>
</ORG>
</rdf:Description>
<rdf:Description rdf:nodeID="n16">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n17"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n15">
<rdf:type>
<rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/>
</rdf:type>
<rdf:value xml:lang="en">hnie010@aucklanduni.ac.nz</rdf:value>
</rdf:Description>
<rdf:Description rdf:nodeID="n10">
<rdf:value>
<rdf:Description rdf:nodeID="n18"/>
</rdf:value>
<subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type>
</rdf:Description>
<rdf:Description rdf:nodeID="n19">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Goldbeter</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Albert</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n2">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Cardenas</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Maria</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Luz</Other>
</rdf:Description>
<rdf:Description rdf:nodeID="n8">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2011-08-04</W3CDTF>
</rdf:Description>
<rdf:Description rdf:nodeID="n20">
<issued xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:nodeID="n14"/>
</issued>
<first_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">421</first_page>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n21"/>
</creator>
<volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">182</volume>
<last_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">426</last_page>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
            The Glucose-induced Switch Between Glycogen Phosphorylase and Glycogen Synthase in the Liver: Outlines of a Theoretical Approach

          </title><Journal xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n5"/></Journal></rdf:Description><rdf:Description rdf:nodeID="n22"><Person xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n1"/></Person></rdf:Description><rdf:Description rdf:nodeID="n18"><rdf:type><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/></rdf:type><rdf:_3 xml:lang="en">hepatocyte</rdf:_3><rdf:_1 xml:lang="en">hepatology</rdf:_1><rdf:_2 xml:lang="en">liver</rdf:_2></rdf:Description><rdf:Description rdf:nodeID="n17"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n19"/></N></rdf:Description><rdf:Description rdf:nodeID="n6"><Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en"> 8944176 </Pubmed_id><JournalArticle xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n20"/></JournalArticle></rdf:Description><rdf:Description rdf:nodeID="n12"><endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">20</endingValue><maximumStepSize xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">1</maximumStepSize></rdf:Description><rdf:Description rdf:nodeID="n21"><rdf:type><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/></rdf:type><rdf:_1><rdf:Description rdf:nodeID="n22"/></rdf:_1><rdf:_2><rdf:Description rdf:nodeID="n16"/></rdf:_2></rdf:Description></rdf:RDF></model>