<?xml version="1.0"?>
<!--
This CellML file was generated on 8/8/2011 at 9:18:59 at AM using:

COR (0.9.31.1409)
Copyright 2002-2011 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="grubelnik_2001_a" name="grubelnik_2001_a">





   <units name="micromole">
      <unit prefix="micro" units="mole"/>
   </units>
   <units name="micromolar">
      <unit units="micromole"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="micromolar_per_second">
      <unit units="micromolar"/>
      <unit exponent="-1" units="second"/>
   </units>
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="second"/>
   </component>
   <component name="Ca_cyt">
      <variable cmeta:id="Ca_cyt_Ca_cyt" initial_value="0.1" name="Ca_cyt" public_interface="out" units="micromolar"/>
      <variable name="J_ERch" public_interface="in" units="micromolar"/>
      <variable name="J_ERpump" public_interface="in" units="micromolar"/>
      <variable name="J_ERleak" public_interface="in" units="micromolar"/>
      <variable name="J_in" public_interface="in" units="micromolar"/>
      <variable name="J_out" public_interface="in" units="micromolar"/>
      <variable name="time" public_interface="in" units="second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Ca_cyt</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <ci>J_ERch</ci>
                     <ci>J_ERpump</ci>
                  </apply>
                  <ci>J_ERleak</ci>
                  <ci>J_in</ci>
               </apply>
               <ci>J_out</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Ca_ER">
      <variable cmeta:id="Ca_ER_Ca_ER" initial_value="0.1" name="Ca_ER" public_interface="out" units="micromolar"/>
      <variable name="J_ERpump" public_interface="in" units="micromolar"/>
      <variable name="J_ERleak" public_interface="in" units="micromolar"/>
      <variable name="J_ERch" public_interface="in" units="micromolar"/>
      <variable name="time" public_interface="in" units="second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Ca_ER</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <ci>J_ERpump</ci>
                  <ci>J_ERleak</ci>
               </apply>
               <ci>J_ERch</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="J_ERch">
      <variable cmeta:id="J_ERch_J_ERch" initial_value="0.1" name="J_ERch" public_interface="out" units="micromolar"/>
      <variable name="Ca_cyt" public_interface="in" units="micromolar"/>
      <variable name="Ca_ER" public_interface="in" units="micromolar"/>
      <variable initial_value="3" name="K_ch" units="micromolar"/>
      <variable initial_value="0.1" name="k_ERch" units="micromolar"/>
      <variable name="time" public_interface="in" units="second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>J_ERch</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>k_ERch</ci>
                     <apply>
                        <power/>
                        <ci>Ca_cyt</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <apply>
                        <power/>
                        <ci>K_ch</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                     </apply>
                     <apply>
                        <power/>
                        <ci>Ca_cyt</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                     </apply>
                  </apply>
               </apply>
               <ci>Ca_ER</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="J_ERpump">
      <variable cmeta:id="J_ERpump_J_ERpump" initial_value="0.1" name="J_ERpump" public_interface="out" units="micromolar"/>
      <variable initial_value="2" name="K_ERpump" units="micromolar"/>
      <variable name="Ca_cyt" public_interface="in" units="micromolar"/>
      <variable name="time" public_interface="in" units="second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>J_ERpump</ci>
            </apply>
            <apply>
               <times/>
               <ci>K_ERpump</ci>
               <ci>Ca_cyt</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="J_ERleak">
      <variable cmeta:id="J_ERleak_J_ERleak" initial_value="0.1" name="J_ERleak" public_interface="out" units="micromolar"/>
      <variable initial_value="0.01" name="K_ERleak" units="micromolar"/>
      <variable name="Ca_ER" public_interface="in" units="micromolar"/>
      <variable name="time" public_interface="in" units="second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>J_ERleak</ci>
            </apply>
            <apply>
               <times/>
               <ci>K_ERleak</ci>
               <ci>Ca_ER</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="J_in">
      <variable cmeta:id="J_in_J_in" initial_value="0.1" name="J_in" public_interface="out" units="micromolar"/>
      <variable initial_value="0.8" name="K_in" units="micromolar"/>
      <variable name="time" public_interface="in" units="second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>J_in</ci>
            </apply>
            <ci>K_in</ci>
         </apply>
      </math>
   </component>
   <component name="J_out">
      <variable cmeta:id="J_out_J_out" initial_value="0.1" name="J_out" public_interface="out" units="micromolar"/>
      <variable initial_value="1" name="K_out" units="micromolar"/>
      <variable name="Ca_cyt" public_interface="in" units="micromolar"/>
      <variable name="time" public_interface="in" units="second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>J_out</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>K_out</ci>
                  <ci>Ca_cyt</ci>
               </apply>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="micromolar_per_second">1</cn>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="environment" component_2="Ca_cyt"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="Ca_ER"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="J_ERch"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="J_ERpump"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="J_ERleak"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="J_in"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="J_out"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="Ca_cyt" component_2="J_ERch"/>
      <map_variables variable_1="J_ERch" variable_2="J_ERch"/>
      <map_variables variable_1="Ca_cyt" variable_2="Ca_cyt"/>
   </connection>
   <connection>
      <map_components component_1="Ca_cyt" component_2="J_ERpump"/>
      <map_variables variable_1="J_ERpump" variable_2="J_ERpump"/>
      <map_variables variable_1="Ca_cyt" variable_2="Ca_cyt"/>
   </connection>
   <connection>
      <map_components component_1="Ca_cyt" component_2="J_ERleak"/>
      <map_variables variable_1="J_ERleak" variable_2="J_ERleak"/>
   </connection>
   <connection>
      <map_components component_1="Ca_cyt" component_2="J_in"/>
      <map_variables variable_1="J_in" variable_2="J_in"/>
   </connection>
   <connection>
      <map_components component_1="Ca_cyt" component_2="J_out"/>
      <map_variables variable_1="J_out" variable_2="J_out"/>
      <map_variables variable_1="Ca_cyt" variable_2="Ca_cyt"/>
   </connection>
   <connection>
      <map_components component_1="Ca_ER" component_2="J_ERpump"/>
      <map_variables variable_1="J_ERpump" variable_2="J_ERpump"/>
   </connection>
   <connection>
      <map_components component_1="Ca_ER" component_2="J_ERleak"/>
      <map_variables variable_1="J_ERleak" variable_2="J_ERleak"/>
      <map_variables variable_1="Ca_ER" variable_2="Ca_ER"/>
   </connection>
   <connection>
      <map_components component_1="Ca_ER" component_2="J_ERch"/>
      <map_variables variable_1="J_ERch" variable_2="J_ERch"/>
      <map_variables variable_1="Ca_ER" variable_2="Ca_ER"/>
   </connection>
<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
<rdf:Description rdf:nodeID="n1">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2011-09-26</W3CDTF>
</rdf:Description>
<rdf:Description rdf:nodeID="n2">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n3"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n4">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n5"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n6">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n7"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n3">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">L</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Olsen</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">F</Other>
</rdf:Description>
<rdf:Description rdf:about="">
<created xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:nodeID="n8"/>
</created>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n9"/>
</creator>
</rdf:Description>
<rdf:Description rdf:nodeID="n10">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n11"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n12">
<rdf:first>
<rdf:Description rdf:nodeID="n13"/>
</rdf:first>
<rdf:rest>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
</rdf:rest>
</rdf:Description>
<rdf:Description rdf:nodeID="n14">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Hanne</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Nielsen</Family>
</rdf:Description>
<rdf:Description rdf:nodeID="n15">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/>
</rdf:type>
<rdf:_3 xml:lang="en">hepatocyte</rdf:_3>
<rdf:_1 xml:lang="en">hepatology</rdf:_1>
<rdf:_2 xml:lang="en">liver</rdf:_2>
</rdf:Description>
<rdf:Description rdf:nodeID="n16">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">U</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Kummer</Family>
</rdf:Description>
<rdf:Description rdf:nodeID="n17">
<rdf:type>
<rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/>
</rdf:type>
<rdf:value xml:lang="en">hnie010@aucklanduni.ac.nz</rdf:value>
</rdf:Description>
<rdf:Description rdf:nodeID="n18">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
</rdf:type>
<rdf:_4>
<rdf:Description rdf:nodeID="n19"/>
</rdf:_4>
<rdf:_5>
<rdf:Description rdf:nodeID="n10"/>
</rdf:_5>
<rdf:_3>
<rdf:Description rdf:nodeID="n4"/>
</rdf:_3>
<rdf:_1>
<rdf:Description rdf:nodeID="n20"/>
</rdf:_1>
<rdf:_2>
<rdf:Description rdf:nodeID="n21"/>
</rdf:_2>
</rdf:Description>
<rdf:Description rdf:nodeID="n22">
<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n12"/>
</boundIntervals>
</rdf:Description>
<rdf:Description rdf:nodeID="n23">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n24"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n24">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">A</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Larsen</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Z</Other>
</rdf:Description>
<rdf:Description rdf:nodeID="n21">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n23"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n20">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n6"/>
</Person>
</rdf:Description>
<rdf:Description rdf:about="#grubelnik_2001a">
<cmeta:bio_entity xml:lang="en">hepatocyte</cmeta:bio_entity>
<cmeta:bio_entity xml:lang="en">Liver</cmeta:bio_entity>
<cmeta:species xml:lang="en">Human</cmeta:species>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n25"/>
</reference>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n26"/>
</reference>
</rdf:Description>
<rdf:Description rdf:nodeID="n9">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n14"/>
</N>
<EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n17"/>
</EMAIL>
<ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n27"/>
</ORG>
</rdf:Description>
<rdf:Description rdf:nodeID="n13">
<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">250</endingValue>
</rdf:Description>
<rdf:Description rdf:nodeID="n27">
<Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The University of Auckland</Orgname>
<Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Auckland Bioengineering Institute</Orgunit>
</rdf:Description>
<rdf:Description rdf:nodeID="n28">
<rdf:value>
<rdf:Description rdf:nodeID="n15"/>
</rdf:value>
<subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type>
</rdf:Description>
<rdf:Description rdf:nodeID="n29">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Biophysical Chemistry</title>
</rdf:Description>
<rdf:Description rdf:nodeID="n26">
<subject xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n28"/>
</subject>
</rdf:Description>
<rdf:Description rdf:nodeID="n25">
<Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">11744191</Pubmed_id>
<JournalArticle xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n30"/>
</JournalArticle>
</rdf:Description>
<rdf:Description rdf:nodeID="n31">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">M</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Marhl</Family>
</rdf:Description>
<rdf:Description rdf:about="#grubelnik_2001_a">
<simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n22"/>
</simulation>
</rdf:Description>
<rdf:Description rdf:nodeID="n19">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n2"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n30">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n18"/>
</creator>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
           Mitochondria regulate the amplitude of simple and complex calcium oscillations
          </title><volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">94</volume><issued xmlns="http://purl.org/dc/terms/"><rdf:Description rdf:nodeID="n1"/></issued><first_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">59</first_page><Journal xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n29"/></Journal><last_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">74</last_page></rdf:Description><rdf:Description rdf:nodeID="n11"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n31"/></N></rdf:Description><rdf:Description rdf:nodeID="n5"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n16"/></N></rdf:Description><rdf:Description rdf:nodeID="n8"><W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2011-09-26</W3CDTF></rdf:Description><rdf:Description rdf:nodeID="n7"><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">V</Given><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Grubelnik</Family></rdf:Description></rdf:RDF></model>