// This CellML file was generated on 9/03/2011 at 2:14:10 at p.m. using:
//
// COR (0.9.31.1409)
// Copyright 2002-2011 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// creator: Family Nielsen; Given Hanne; hnie010@aucklanduni.ac.nz; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2009-10-08
// simulation: endingValue 6
def model guthke_curvy_amended_2006 as
  def unit hour as
    unit second {mult: 3600};
  enddef;
  def unit day as
    unit hour {mult: 24};
  enddef;
  def unit per_day as
    unit day {expo: -1};
  enddef;
  def unit per_litre as
    unit litre {expo: -1};
  enddef;
  def unit litre_per_day as
    unit litre;
    unit day {expo: -1};
  enddef;
  def unit micromole as
    unit mole {pref: micro};
  enddef;
  def unit micromole_per_litre as
    unit micromole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit per_day_per_micromole_litre as
    unit day {expo: -1};
    unit micromole {expo: -1};
    unit litre;
  enddef;
  def unit micromole_per_litre_per_day as
    unit micromole;
    unit litre {expo: -1};
    unit day {expo: -1};
  enddef;

  def comp environment as
    var time: day {pub: out};
  enddef;

  def comp FAt as
    var FAt: litre_per_day {pub: out};
    var FA1: litre_per_day {init: 3.6};
    var tA: day {init: 1};
    var FA2: litre_per_day {init: 1.2};
    var time: day {pub: in};
    FAt = sel
      case time >= tA:
        FA2;
      otherwise:
        FA1;
    endsel;
  enddef;

  def comp FBt as
    var FBt: litre_per_day {pub: out};
    var FB1: litre_per_day {init: 0};
    var tB: day {init: 3};
    var FB2: litre_per_day {init: 0.024};
    var time: day {pub: in};
    FBt = sel
      case time >= tB:
        FB2;
      otherwise:
        FB1;
    endsel;
  enddef;

  def comp F0t as
    var F0t: litre_per_day {pub: out};
    var FAt: litre_per_day {pub: in};
    var FBt: litre_per_day {pub: in};
    var time: day {pub: in};
    F0t = FAt+FBt;
  enddef;

  def comp c15 as
    var c15: micromole_per_litre {init: 284, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c015: micromole_per_litre {pub: in};
    var p16: per_day {pub: in};
    var c16: micromole_per_litre {pub: in};
    var p18: per_day {pub: in};
    var c17: micromole_per_litre {pub: in};
    var p15: per_day_per_micromole_litre {pub: in};
    var c19: micromole_per_litre {pub: in};
    var p17: per_day {pub: in};
    var p19: per_day_per_micromole_litre {pub: in};
    var p20: micromole_per_litre {pub: in};
    var p29: per_day {pub: in};
    var pAA15: dimensionless {pub: in};
    var pp: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c15, time) = p0/V2*(c015-c15)+p16*c16+p17*c17+pAA15*pp-(p15*c19+p18+p19*c19/(p20+c15)+p29)*c15;
  enddef;

  def comp c16 as
    var c16: micromole_per_litre {init: 168, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c016: micromole_per_litre {pub: in};
    var p15: per_day_per_micromole_litre {pub: in};
    var c15: micromole_per_litre {pub: in};
    var c19: micromole_per_litre {pub: in};
    var pAA16: dimensionless {pub: in};
    var pp: dimensionless {pub: in};
    var p16: per_day {pub: in};
    var time: day {pub: in};
    ode(c16, time) = p0/V2*(c016-c16)+p15*c15*c19-p16*c16+pAA16*pp;
  enddef;

  def comp c17 as
    var c17: micromole_per_litre {init: 265, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c017: micromole_per_litre {pub: in};
    var p17: per_day {pub: in};
    var c15: micromole_per_litre {pub: in};
    var p22: per_day {pub: in};
    var c18: micromole_per_litre {pub: in};
    var p18: per_day {pub: in};
    var p21: per_day {pub: in};
    var c19: micromole_per_litre {pub: in};
    var p23: per_day {pub: in};
    var p1: per_day {pub: in};
    var s1: dimensionless {init: 1};
    var c1: micromole_per_litre {pub: in};
    var p2: per_day {pub: in};
    var s2: dimensionless {init: 3};
    var c2: micromole_per_litre {pub: in};
    var p3: per_day {pub: in};
    var s3: dimensionless {init: 4};
    var c3: micromole_per_litre {pub: in};
    var p4: per_day {pub: in};
    var s4: dimensionless {init: 1};
    var c4: micromole_per_litre {pub: in};
    var p5: per_day {pub: in};
    var s5: dimensionless {init: 2};
    var c5: micromole_per_litre {pub: in};
    var p6: per_day {pub: in};
    var s6: dimensionless {init: 1};
    var c6: micromole_per_litre {pub: in};
    var p7: per_day {pub: in};
    var s7: dimensionless {init: 1};
    var c7: micromole_per_litre {pub: in};
    var p8: per_day {pub: in};
    var s8: dimensionless {init: 1};
    var c8: micromole_per_litre {pub: in};
    var p9: per_day {pub: in};
    var s9: dimensionless {init: 1};
    var c9: micromole_per_litre {pub: in};
    var p14: per_day {pub: in};
    var s14: dimensionless {init: 1};
    var c14: micromole_per_litre {pub: in};
    var p25: per_day_per_micromole_litre {pub: in};
    var p26: per_day {pub: in};
    var p28: per_day {pub: in};
    var pAA17: dimensionless {pub: in};
    var pp: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c17, time) = p0/V2*(c017-c17)+p1*s1*c1+p2*s2*c2+p3*s3*c3+p4*s4*c4+p5*s5*c5+p6*s6*c6+p7*s7*c7+p8*s8*c8+p9*s9*c9+p14*s14*c14+p18*c15+p26*c18-(p17+p25*c19+p28)*c17+pAA17*pp;
  enddef;

  def comp c18 as
    var c18: micromole_per_litre {init: 687, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c018: micromole_per_litre {pub: in};
    var p25: per_day_per_micromole_litre {pub: in};
    var c17: micromole_per_litre {pub: in};
    var c19: micromole_per_litre {pub: in};
    var p26: per_day {pub: in};
    var pAA18: dimensionless {pub: in};
    var pp: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c18, time) = p0/V2*(c018-c18)+p25*c17*c19-p26*c18+pAA18*pp;
  enddef;

  def comp c19 as
    var c19: micromole_per_litre {init: 41, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c019: micromole_per_litre {pub: in};
    var p23: per_day {pub: in};
    var gt: dimensionless {pub: in};
    var c17: micromole_per_litre {pub: in};
    var p16: per_day {pub: in};
    var c16: micromole_per_litre {pub: in};
    var p26: per_day {pub: in};
    var c18: micromole_per_litre {pub: in};
    var p19: per_day_per_micromole_litre {pub: in};
    var c15: micromole_per_litre {pub: in};
    var p20: micromole_per_litre {pub: in};
    var p25: per_day_per_micromole_litre {pub: in};
    var p15: per_day_per_micromole_litre {pub: in};
    var p11: per_day {pub: in};
    var s11: dimensionless {init: 1};
    var c11: micromole_per_litre {pub: in};
    var p12: per_day {pub: in};
    var s12: dimensionless {init: 1};
    var c12: micromole_per_litre {pub: in};
    var p13: per_day {pub: in};
    var s13: dimensionless {init: 1};
    var c13: micromole_per_litre {pub: in};
    var p10: per_day {pub: in};
    var s10: dimensionless {init: 1};
    var c10: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c19, time) = p0/V2*(c019-c19)+p11*s11*c11+p12*s12*c12+p13*c13*s13+p10*c10*s10+p23*(1{dimensionless}-gt)*c17+p16*c16+p26*c18-(p19*c15/(p20+c15)+p15*c15+p25*c17)*c19;
  enddef;

  def comp c20 as
    var c20: micromole_per_litre {init: 0, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c020: micromole_per_litre {pub: in};
    var p19: per_day_per_micromole_litre {pub: in};
    var c15: micromole_per_litre {pub: in};
    var c19: micromole_per_litre {pub: in};
    var p20: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c20, time) = p0/V2*(c020-c20)+p19*c15/(p20+c15)*c19;
  enddef;

  def comp c21 as
    var c21: micromole_per_litre {init: 0, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c021: micromole_per_litre {pub: in};
    var p21: per_day {pub: in};
    var time: day {pub: in};
    ode(c21, time) = p0/V2*(c021-c21)-p21*c21;
  enddef;

  def comp c22 as
    var c22: micromole_per_litre {init: 0, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c022: micromole_per_litre {pub: in};
    var p22: per_day {pub: in};
    var time: day {pub: in};
    ode(c22, time) = p0/V2*(c022-c22)-p22*c22;
  enddef;

  def comp c23 as
    var c23: micromole_per_litre {init: 8159, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c023: micromole_per_litre {pub: in};
    var p21: per_day {pub: in};
    var c21: micromole_per_litre {pub: in};
    var p22: per_day {pub: in};
    var c22: micromole_per_litre {pub: in};
    var p23: per_day {pub: in};
    var p31: per_day {pub: in};
    var c15: micromole_per_litre {pub: in};
    var p20: micromole_per_litre {pub: in};
    var c19: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c23, time) = p0/V2*(c023-c23)+p21*c21+p22*c22-p23*c23+p31*c15/(p20+c15)*c19;
  enddef;

  def comp c24 as
    var c24: micromole_per_litre {init: 8159, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c024: micromole_per_litre {pub: in};
    var p30: dimensionless {pub: in};
    var p23: per_day {pub: in};
    var c23: micromole_per_litre {pub: in};
    var p32: per_day {pub: in};
    var c15: micromole_per_litre {pub: in};
    var p20: micromole_per_litre {pub: in};
    var c19: micromole_per_litre {pub: in};
    var p24: per_day {pub: in};
    var time: day {pub: in};
    ode(c24, time) = p0/V2*(c024-c24)+2{dimensionless}*p30*p23*c23+p32*c15/(p20+c15)*c19-p24*c24;
  enddef;

  def comp pp as
    var pp: dimensionless {pub: out};
    var p33: micromole_per_litre_per_day {init: 0};
    var t1: day {init: 1};
    var time: day {pub: in};
    pp = sel
      case time < t1:
        p33;
      otherwise:
        0{dimensionless};
    endsel;
  enddef;

  def comp gt as
    var gt: dimensionless {pub: out};
    var p27: dimensionless {pub: in};
    var time: day {pub: in};
    gt = sel
      case time < 3{day}:
        0{dimensionless};
      otherwise:
        p27;
    endsel;
  enddef;

  def comp c1 as
    var c1: micromole_per_litre {init: 2258, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c01: micromole_per_litre {pub: in};
    var p1: per_day {pub: in};
    var pp: dimensionless {pub: in};
    var pAA1: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c1, time) = p0/V2*(c01-c1)-p1*c1+pAA1*pp;
  enddef;

  def comp c2 as
    var c2: micromole_per_litre {init: 940, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c02: micromole_per_litre {pub: in};
    var p2: per_day {pub: in};
    var pp: dimensionless {pub: in};
    var pAA2: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c2, time) = p0/V2*(c02-c2)-p2*c2+pAA2*pp;
  enddef;

  def comp c3 as
    var c3: micromole_per_litre {init: 2604, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c03: micromole_per_litre {pub: in};
    var p3: per_day {pub: in};
    var pp: dimensionless {pub: in};
    var pAA3: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c3, time) = p0/V2*(c03-c3)-p3*c3+pAA3*pp;
  enddef;

  def comp c4 as
    var c4: micromole_per_litre {init: 987, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c04: micromole_per_litre {pub: in};
    var p4: per_day {pub: in};
    var pp: dimensionless {pub: in};
    var pAA4: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c4, time) = p0/V2*(c04-c4)-p4*c4+pAA4*pp;
  enddef;

  def comp c5 as
    var c5: micromole_per_litre {init: 464, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c05: micromole_per_litre {pub: in};
    var p5: per_day {pub: in};
    var pp: dimensionless {pub: in};
    var pAA5: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c5, time) = p0/V2*(c05-c5)-p5*c5+pAA5*pp;
  enddef;

  def comp c6 as
    var c6: micromole_per_litre {init: 1300, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c06: micromole_per_litre {pub: in};
    var p6: per_day {pub: in};
    var pp: dimensionless {pub: in};
    var pAA6: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c6, time) = p0/V2*(c06-c6)-p6*c6+pAA6*pp;
  enddef;

  def comp c7 as
    var c7: micromole_per_litre {init: 500, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c07: micromole_per_litre {pub: in};
    var p7: per_day {pub: in};
    var pp: dimensionless {pub: in};
    var pAA7: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c7, time) = p0/V2*(c07-c7)-p7*c7+pAA7*pp;
  enddef;

  def comp c8 as
    var c8: micromole_per_litre {init: 1825, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c08: micromole_per_litre {pub: in};
    var p8: per_day {pub: in};
    var pp: dimensionless {pub: in};
    var pAA8: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c8, time) = p0/V2*(c08-c8)-p8*c8+pAA8*pp;
  enddef;

  def comp c9 as
    var c9: micromole_per_litre {init: 2215, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c09: micromole_per_litre {pub: in};
    var p9: per_day {pub: in};
    var pp: dimensionless {pub: in};
    var pAA9: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c9, time) = p0/V2*(c09-c9)-p9*c9+pAA9*pp;
  enddef;

  def comp c10 as
    var c10: micromole_per_litre {init: 327, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c010: micromole_per_litre {pub: in};
    var p10: per_day {pub: in};
    var pp: dimensionless {pub: in};
    var pAA10: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c10, time) = p0/V2*(c010-c10)-p10*c10+pAA10*pp;
  enddef;

  def comp c11 as
    var c11: micromole_per_litre {init: 259, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c011: micromole_per_litre {pub: in};
    var p11: per_day {pub: in};
    var pp: dimensionless {pub: in};
    var pAA11: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c11, time) = p0/V2*(c011-c11)-p11*c11+pAA11*pp;
  enddef;

  def comp c12 as
    var c12: micromole_per_litre {init: 861, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c012: micromole_per_litre {pub: in};
    var p12: per_day {pub: in};
    var pp: dimensionless {pub: in};
    var pAA12: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c12, time) = p0/V2*(c012-c12)-p12*c12+pAA12*pp;
  enddef;

  def comp c13 as
    var c13: micromole_per_litre {init: 1957, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c013: micromole_per_litre {pub: in};
    var p13: per_day {pub: in};
    var pp: dimensionless {pub: in};
    var pAA13: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c13, time) = p0/V2*(c013-c13)-p13*c13+pAA13*pp;
  enddef;

  def comp c14 as
    var c14: micromole_per_litre {init: 859, pub: out};
    var p0: litre_per_day {pub: in};
    var V2: litre {pub: in};
    var c014: micromole_per_litre {pub: in};
    var p14: per_day {pub: in};
    var pp: dimensionless {pub: in};
    var pAA14: dimensionless {pub: in};
    var time: day {pub: in};
    ode(c14, time) = p0/V2*(c014-c14)-p14*c14+pAA14*pp;
  enddef;

  def comp c01 as
    var c01: micromole_per_litre {init: 2258, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA1: micromole_per_litre {init: 2258};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c1: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c01, time) = FAt/V1*CA1+FBt/V1*CB1-F0t/V1*c01-p0/V1*(c01-c1);
  enddef;

  def comp c02 as
    var c02: micromole_per_litre {init: 940, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA2: micromole_per_litre {init: 940};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c2: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c02, time) = FAt/V1*CA2+FBt/V1*CB1-F0t/V1*c02-p0/V1*(c02-c2);
  enddef;

  def comp c03 as
    var c03: micromole_per_litre {init: 2604, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA3: micromole_per_litre {init: 2604};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c3: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c03, time) = FAt/V1*CA3+FBt/V1*CB1-F0t/V1*c03-p0/V1*(c03-c3);
  enddef;

  def comp c04 as
    var c04: micromole_per_litre {init: 987, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA4: micromole_per_litre {init: 987};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c4: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c04, time) = FAt/V1*CA4+FBt/V1*CB1-F0t/V1*c04-p0/V1*(c04-c4);
  enddef;

  def comp c05 as
    var c05: micromole_per_litre {init: 464, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA5: micromole_per_litre {init: 464};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c5: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c05, time) = FAt/V1*CA5+FBt/V1*CB1-F0t/V1*c05-p0/V1*(c05-c5);
  enddef;

  def comp c06 as
    var c06: micromole_per_litre {init: 1300, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA6: micromole_per_litre {init: 1300};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c6: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c06, time) = FAt/V1*CA6+FBt/V1*CB1-F0t/V1*c06-p0/V1*(c06-c6);
  enddef;

  def comp c07 as
    var c07: micromole_per_litre {init: 500, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA7: micromole_per_litre {init: 500};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c7: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c07, time) = FAt/V1*CA7+FBt/V1*CB1-F0t/V1*c07-p0/V1*(c07-c7);
  enddef;

  def comp c08 as
    var c08: micromole_per_litre {init: 1825, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA8: micromole_per_litre {init: 1825};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c8: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c08, time) = FAt/V1*CA8+FBt/V1*CB1-F0t/V1*c08-p0/V1*(c08-c8);
  enddef;

  def comp c09 as
    var c09: micromole_per_litre {init: 2215, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA9: micromole_per_litre {init: 2215};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c9: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c09, time) = FAt/V1*CA9+FBt/V1*CB1-F0t/V1*c09-p0/V1*(c09-c9);
  enddef;

  def comp c010 as
    var c010: micromole_per_litre {init: 327, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA10: micromole_per_litre {init: 327};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c10: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c010, time) = FAt/V1*CA10+FBt/V1*CB1-F0t/V1*c010-p0/V1*(c010-c10);
  enddef;

  def comp c011 as
    var c011: micromole_per_litre {init: 259, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA11: micromole_per_litre {init: 259};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c11: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c011, time) = FAt/V1*CA11+FBt/V1*CB1-F0t/V1*c011-p0/V1*(c011-c11);
  enddef;

  def comp c012 as
    var c012: micromole_per_litre {init: 861, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA12: micromole_per_litre {init: 861};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c12: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c012, time) = FAt/V1*CA12+FBt/V1*CB1-F0t/V1*c012-p0/V1*(c012-c12);
  enddef;

  def comp c013 as
    var c013: micromole_per_litre {init: 1957, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA13: micromole_per_litre {init: 1957};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c13: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c013, time) = FAt/V1*CA13+FBt/V1*CB1-F0t/V1*c013-p0/V1*(c013-c13);
  enddef;

  def comp c014 as
    var c014: micromole_per_litre {init: 859, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA14: micromole_per_litre {init: 859};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c14: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c014, time) = FAt/V1*CA14+FBt/V1*CB1-F0t/V1*c014-p0/V1*(c014-c14);
  enddef;

  def comp c015 as
    var c015: micromole_per_litre {init: 284, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA15: micromole_per_litre {init: 284};
    var FBt: litre_per_day {pub: in};
    var CB15: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c15: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c015, time) = FAt/V1*CA15+FBt/V1*CB15-F0t/V1*c015-p0/V1*(c015-c15);
  enddef;

  def comp c016 as
    var c016: micromole_per_litre {init: 168, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA16: micromole_per_litre {init: 168};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c16: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c016, time) = FAt/V1*CA16+FBt/V1*CB1-F0t/V1*c016-p0/V1*(c016-c16);
  enddef;

  def comp c017 as
    var c017: micromole_per_litre {init: 265, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA17: micromole_per_litre {init: 265};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c17: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c017, time) = FAt/V1*CA17+FBt/V1*CB1-F0t/V1*c017-p0/V1*(c017-c17);
  enddef;

  def comp c018 as
    var c018: micromole_per_litre {init: 687, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA18: micromole_per_litre {init: 687};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c18: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c018, time) = FAt/V1*CA18+FBt/V1*CB1-F0t/V1*c018-p0/V1*(c018-c18);
  enddef;

  def comp c019 as
    var c019: micromole_per_litre {init: 41, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA19: micromole_per_litre {init: 41};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c19: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c019, time) = FAt/V1*CA19+FBt/V1*CB1-F0t/V1*c019-p0/V1*(c019-c19);
  enddef;

  def comp c020 as
    var c020: micromole_per_litre {init: 0, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var FBt: litre_per_day {pub: in};
    var CA20: micromole_per_litre {init: 0};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c20: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c020, time) = FAt/V1*CA20+FBt/V1*CB1-F0t/V1*c020-p0/V1*(c020-c20);
  enddef;

  def comp c021 as
    var c021: micromole_per_litre {init: 0, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA21: micromole_per_litre {init: 0};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c21: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c021, time) = FAt/V1*CA21+FBt/V1*CB1-F0t/V1*c021-p0/V1*(c021-c21);
  enddef;

  def comp c022 as
    var c022: micromole_per_litre {init: 0, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA22: micromole_per_litre {init: 0};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c22: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c022, time) = FAt/V1*CA22+FBt/V1*CB1-F0t/V1*c022-p0/V1*(c022-c22);
  enddef;

  def comp c023 as
    var c023: micromole_per_litre {init: 0, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA23: micromole_per_litre {init: 0};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c23: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c023, time) = FAt/V1*CA23+FBt/V1*CB1-F0t/V1*c023-p0/V1*(c023-c23);
  enddef;

  def comp c024 as
    var c024: micromole_per_litre {init: 0, pub: out};
    var p0: litre_per_day {pub: in};
    var V1: litre {pub: in};
    var FAt: litre_per_day {pub: in};
    var CA24: micromole_per_litre {init: 0};
    var FBt: litre_per_day {pub: in};
    var CB1: micromole_per_litre {pub: in};
    var F0t: litre_per_day {pub: in};
    var c24: micromole_per_litre {pub: in};
    var time: day {pub: in};
    ode(c024, time) = FAt/V1*CA24+FBt/V1*CB1-F0t/V1*c024-p0/V1*(c024-c24);
  enddef;

  def comp model_parameters as
    var V1: litre {init: 0.6, pub: out};
    var V2: litre {init: 0.9, pub: out};
    var CB1: micromole_per_litre {init: 0, pub: out};
    var CB15: micromole_per_litre {init: 1500, pub: out};
    var p0: litre_per_day {init: 1191.072, pub: out};
    var p1: per_day {init: 1.816, pub: out};
    var p2: per_day {init: 16.29, pub: out};
    var p3: per_day {init: 100, pub: out};
    var p4: per_day {init: 1.147, pub: out};
    var p5: per_day {init: 15.99, pub: out};
    var p6: per_day {init: 4.148, pub: out};
    var p7: per_day {init: 3.723, pub: out};
    var p8: per_day {init: 1.573, pub: out};
    var p9: per_day {init: 1.135, pub: out};
    var p10: per_day {init: 0.192, pub: out};
    var p11: per_day {init: 34.53, pub: out};
    var p12: per_day {init: 10.8, pub: out};
    var p13: per_day {init: 10.76, pub: out};
    var p14: per_day {init: 9.326, pub: out};
    var p15: per_day_per_micromole_litre {init: 0.0009, pub: out};
    var p16: per_day {init: 3.593, pub: out};
    var p17: per_day {init: 50.08, pub: out};
    var p18: per_day {init: 56.73, pub: out};
    var p19: per_day_per_micromole_litre {init: 225.76, pub: out};
    var p20: micromole_per_litre {init: 5, pub: out};
    var p21: per_day {init: 0.0033, pub: out};
    var p22: per_day {init: 0.0205, pub: out};
    var p23: per_day {init: 40.68, pub: out};
    var p24: per_day {init: 0.5474, pub: out};
    var p25: per_day_per_micromole_litre {init: 0, pub: out};
    var p26: per_day {init: 0, pub: out};
    var p27: dimensionless {init: 0.6804, pub: out};
    var p28: per_day {init: 38.05, pub: out};
    var p29: per_day {init: 2.8119, pub: out};
    var p30: dimensionless {init: 0, pub: out};
    var p31: per_day {init: 1.31, pub: out};
    var p32: per_day {init: 478.7, pub: out};
    var pAA1: dimensionless {init: 1.4, pub: out};
    var pAA2: dimensionless {init: 0.18, pub: out};
    var pAA3: dimensionless {init: 0, pub: out};
    var pAA4: dimensionless {init: 1.19, pub: out};
    var pAA5: dimensionless {init: 0.45, pub: out};
    var pAA6: dimensionless {init: 1.05, pub: out};
    var pAA7: dimensionless {init: 0.62, pub: out};
    var pAA8: dimensionless {init: 1.15, pub: out};
    var pAA9: dimensionless {init: 1, pub: out};
    var pAA10: dimensionless {init: 0.15, pub: out};
    var pAA11: dimensionless {init: 0.77, pub: out};
    var pAA12: dimensionless {init: 1.55, pub: out};
    var pAA13: dimensionless {init: 0.78, pub: out};
    var pAA14: dimensionless {init: 1.81, pub: out};
    var pAA15: dimensionless {init: 0.31, pub: out};
    var pAA16: dimensionless {init: 0.25, pub: out};
    var pAA17: dimensionless {init: 1.27, pub: out};
    var pAA18: dimensionless {init: 0.06, pub: out};
  enddef;
  def map between F0t and environment for
    vars time and time;
  enddef;
  def map between FAt and environment for
    vars time and time;
  enddef;
  def map between FBt and environment for
    vars time and time;
  enddef;
  def map between c1 and environment for
    vars time and time;
  enddef;
  def map between c2 and environment for
    vars time and time;
  enddef;
  def map between c3 and environment for
    vars time and time;
  enddef;
  def map between c4 and environment for
    vars time and time;
  enddef;
  def map between c5 and environment for
    vars time and time;
  enddef;
  def map between c6 and environment for
    vars time and time;
  enddef;
  def map between c7 and environment for
    vars time and time;
  enddef;
  def map between c8 and environment for
    vars time and time;
  enddef;
  def map between c9 and environment for
    vars time and time;
  enddef;
  def map between c10 and environment for
    vars time and time;
  enddef;
  def map between c11 and environment for
    vars time and time;
  enddef;
  def map between c12 and environment for
    vars time and time;
  enddef;
  def map between c13 and environment for
    vars time and time;
  enddef;
  def map between c14 and environment for
    vars time and time;
  enddef;
  def map between c15 and environment for
    vars time and time;
  enddef;
  def map between c16 and environment for
    vars time and time;
  enddef;
  def map between c17 and environment for
    vars time and time;
  enddef;
  def map between c18 and environment for
    vars time and time;
  enddef;
  def map between c19 and environment for
    vars time and time;
  enddef;
  def map between c20 and environment for
    vars time and time;
  enddef;
  def map between c21 and environment for
    vars time and time;
  enddef;
  def map between c22 and environment for
    vars time and time;
  enddef;
  def map between c23 and environment for
    vars time and time;
  enddef;
  def map between c24 and environment for
    vars time and time;
  enddef;
  def map between pp and environment for
    vars time and time;
  enddef;
  def map between c01 and environment for
    vars time and time;
  enddef;
  def map between c02 and environment for
    vars time and time;
  enddef;
  def map between c03 and environment for
    vars time and time;
  enddef;
  def map between c04 and environment for
    vars time and time;
  enddef;
  def map between c05 and environment for
    vars time and time;
  enddef;
  def map between c06 and environment for
    vars time and time;
  enddef;
  def map between c07 and environment for
    vars time and time;
  enddef;
  def map between c08 and environment for
    vars time and time;
  enddef;
  def map between c09 and environment for
    vars time and time;
  enddef;
  def map between c010 and environment for
    vars time and time;
  enddef;
  def map between c011 and environment for
    vars time and time;
  enddef;
  def map between c012 and environment for
    vars time and time;
  enddef;
  def map between c013 and environment for
    vars time and time;
  enddef;
  def map between c014 and environment for
    vars time and time;
  enddef;
  def map between c015 and environment for
    vars time and time;
  enddef;
  def map between c016 and environment for
    vars time and time;
  enddef;
  def map between c017 and environment for
    vars time and time;
  enddef;
  def map between c018 and environment for
    vars time and time;
  enddef;
  def map between c019 and environment for
    vars time and time;
  enddef;
  def map between c020 and environment for
    vars time and time;
  enddef;
  def map between c021 and environment for
    vars time and time;
  enddef;
  def map between c022 and environment for
    vars time and time;
  enddef;
  def map between c023 and environment for
    vars time and time;
  enddef;
  def map between c024 and environment for
    vars time and time;
  enddef;
  def map between gt and environment for
    vars time and time;
  enddef;
  def map between F0t and FAt for
    vars FAt and FAt;
  enddef;
  def map between F0t and FBt for
    vars FBt and FBt;
  enddef;
  def map between gt and model_parameters for
    vars p27 and p27;
  enddef;
  def map between c1 and model_parameters for
    vars p0 and p0;
    vars p1 and p1;
    vars V2 and V2;
    vars pAA1 and pAA1;
  enddef;
  def map between c1 and c01 for
    vars c01 and c01;
    vars c1 and c1;
  enddef;
  def map between c2 and model_parameters for
    vars p0 and p0;
    vars p2 and p2;
    vars V2 and V2;
    vars pAA2 and pAA2;
  enddef;
  def map between c2 and c02 for
    vars c02 and c02;
    vars c2 and c2;
  enddef;
  def map between c3 and model_parameters for
    vars p0 and p0;
    vars p3 and p3;
    vars V2 and V2;
    vars pAA3 and pAA3;
  enddef;
  def map between c3 and c03 for
    vars c03 and c03;
    vars c3 and c3;
  enddef;
  def map between c4 and model_parameters for
    vars p0 and p0;
    vars p4 and p4;
    vars V2 and V2;
    vars pAA4 and pAA4;
  enddef;
  def map between c4 and c04 for
    vars c04 and c04;
    vars c4 and c4;
  enddef;
  def map between c5 and model_parameters for
    vars p0 and p0;
    vars p5 and p5;
    vars V2 and V2;
    vars pAA5 and pAA5;
  enddef;
  def map between c5 and c05 for
    vars c05 and c05;
    vars c5 and c5;
  enddef;
  def map between c6 and model_parameters for
    vars p0 and p0;
    vars p6 and p6;
    vars V2 and V2;
    vars pAA6 and pAA6;
  enddef;
  def map between c6 and c06 for
    vars c06 and c06;
    vars c6 and c6;
  enddef;
  def map between c7 and model_parameters for
    vars p0 and p0;
    vars p7 and p7;
    vars V2 and V2;
    vars pAA7 and pAA7;
  enddef;
  def map between c7 and c07 for
    vars c07 and c07;
    vars c7 and c7;
  enddef;
  def map between c8 and model_parameters for
    vars p0 and p0;
    vars p8 and p8;
    vars V2 and V2;
    vars pAA8 and pAA8;
  enddef;
  def map between c8 and c08 for
    vars c08 and c08;
    vars c8 and c8;
  enddef;
  def map between c9 and model_parameters for
    vars p0 and p0;
    vars p9 and p9;
    vars V2 and V2;
    vars pAA9 and pAA9;
  enddef;
  def map between c9 and c09 for
    vars c09 and c09;
    vars c9 and c9;
  enddef;
  def map between c10 and model_parameters for
    vars p0 and p0;
    vars p10 and p10;
    vars V2 and V2;
    vars pAA10 and pAA10;
  enddef;
  def map between c10 and c010 for
    vars c010 and c010;
    vars c10 and c10;
  enddef;
  def map between c11 and model_parameters for
    vars p0 and p0;
    vars p11 and p11;
    vars V2 and V2;
    vars pAA11 and pAA11;
  enddef;
  def map between c11 and c011 for
    vars c011 and c011;
    vars c11 and c11;
  enddef;
  def map between c12 and model_parameters for
    vars p0 and p0;
    vars p12 and p12;
    vars V2 and V2;
    vars pAA12 and pAA12;
  enddef;
  def map between c12 and c012 for
    vars c012 and c012;
    vars c12 and c12;
  enddef;
  def map between c13 and model_parameters for
    vars p0 and p0;
    vars p13 and p13;
    vars V2 and V2;
    vars pAA13 and pAA13;
  enddef;
  def map between c13 and c013 for
    vars c013 and c013;
    vars c13 and c13;
  enddef;
  def map between c14 and model_parameters for
    vars p0 and p0;
    vars p14 and p14;
    vars V2 and V2;
    vars pAA14 and pAA14;
  enddef;
  def map between c14 and c014 for
    vars c014 and c014;
    vars c14 and c14;
  enddef;
  def map between c14 and c17 for
    vars c14 and c14;
  enddef;
  def map between c15 and model_parameters for
    vars p0 and p0;
    vars p15 and p15;
    vars p16 and p16;
    vars p17 and p17;
    vars p18 and p18;
    vars p19 and p19;
    vars p20 and p20;
    vars V2 and V2;
    vars p29 and p29;
    vars pAA15 and pAA15;
  enddef;
  def map between c15 and c015 for
    vars c015 and c015;
    vars c15 and c15;
  enddef;
  def map between c16 and model_parameters for
    vars p0 and p0;
    vars p15 and p15;
    vars p16 and p16;
    vars V2 and V2;
    vars pAA16 and pAA16;
  enddef;
  def map between c16 and c016 for
    vars c016 and c016;
    vars c16 and c16;
  enddef;
  def map between c17 and model_parameters for
    vars p0 and p0;
    vars p14 and p14;
    vars p17 and p17;
    vars p18 and p18;
    vars p21 and p21;
    vars p22 and p22;
    vars p23 and p23;
    vars p25 and p25;
    vars p26 and p26;
    vars p28 and p28;
    vars p1 and p1;
    vars p2 and p2;
    vars p3 and p3;
    vars p4 and p4;
    vars p5 and p5;
    vars p6 and p6;
    vars p7 and p7;
    vars p8 and p8;
    vars p9 and p9;
    vars V2 and V2;
    vars pAA17 and pAA17;
  enddef;
  def map between c17 and c017 for
    vars c017 and c017;
    vars c17 and c17;
  enddef;
  def map between c18 and model_parameters for
    vars p0 and p0;
    vars p25 and p25;
    vars p26 and p26;
    vars pAA18 and pAA18;
    vars V2 and V2;
  enddef;
  def map between c18 and c018 for
    vars c018 and c018;
    vars c18 and c18;
  enddef;
  def map between c19 and model_parameters for
    vars p0 and p0;
    vars p10 and p10;
    vars p23 and p23;
    vars p25 and p25;
    vars p26 and p26;
    vars p16 and p16;
    vars p19 and p19;
    vars p20 and p20;
    vars p15 and p15;
    vars p11 and p11;
    vars p12 and p12;
    vars p13 and p13;
    vars V2 and V2;
  enddef;
  def map between c19 and c10 for
    vars c10 and c10;
  enddef;
  def map between c19 and c019 for
    vars c019 and c019;
    vars c19 and c19;
  enddef;
  def map between c20 and model_parameters for
    vars p0 and p0;
    vars p19 and p19;
    vars p20 and p20;
    vars V2 and V2;
  enddef;
  def map between c20 and c020 for
    vars c020 and c020;
    vars c20 and c20;
  enddef;
  def map between c21 and model_parameters for
    vars p0 and p0;
    vars p21 and p21;
    vars V2 and V2;
  enddef;
  def map between c21 and c021 for
    vars c021 and c021;
    vars c21 and c21;
  enddef;
  def map between c22 and model_parameters for
    vars p0 and p0;
    vars p22 and p22;
    vars V2 and V2;
  enddef;
  def map between c22 and c022 for
    vars c022 and c022;
    vars c22 and c22;
  enddef;
  def map between c23 and model_parameters for
    vars p0 and p0;
    vars p20 and p20;
    vars p21 and p21;
    vars p22 and p22;
    vars p23 and p23;
    vars p31 and p31;
    vars V2 and V2;
  enddef;
  def map between c23 and c22 for
    vars c22 and c22;
  enddef;
  def map between c23 and c21 for
    vars c21 and c21;
  enddef;
  def map between c23 and c19 for
    vars c19 and c19;
  enddef;
  def map between c23 and c15 for
    vars c15 and c15;
  enddef;
  def map between c23 and c023 for
    vars c023 and c023;
    vars c23 and c23;
  enddef;
  def map between c24 and model_parameters for
    vars p0 and p0;
    vars p30 and p30;
    vars p23 and p23;
    vars p32 and p32;
    vars p20 and p20;
    vars p24 and p24;
    vars V2 and V2;
  enddef;
  def map between c24 and c23 for
    vars c23 and c23;
  enddef;
  def map between c24 and c19 for
    vars c19 and c19;
  enddef;
  def map between c24 and c15 for
    vars c15 and c15;
  enddef;
  def map between c24 and c024 for
    vars c024 and c024;
    vars c24 and c24;
  enddef;
  def map between c19 and gt for
    vars gt and gt;
  enddef;
  def map between c20 and c15 for
    vars c15 and c15;
  enddef;
  def map between c20 and c19 for
    vars c19 and c19;
  enddef;
  def map between c19 and c11 for
    vars c11 and c11;
  enddef;
  def map between c19 and c12 for
    vars c12 and c12;
  enddef;
  def map between c19 and c13 for
    vars c13 and c13;
  enddef;
  def map between c19 and c15 for
    vars c15 and c15;
    vars c19 and c19;
  enddef;
  def map between c19 and c16 for
    vars c16 and c16;
    vars c19 and c19;
  enddef;
  def map between c19 and c18 for
    vars c18 and c18;
    vars c19 and c19;
  enddef;
  def map between c15 and c17 for
    vars c17 and c17;
    vars c15 and c15;
  enddef;
  def map between c16 and c15 for
    vars c16 and c16;
    vars c15 and c15;
  enddef;
  def map between c01 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c01 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c01 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c01 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c02 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c02 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c02 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c02 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c03 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c03 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c03 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c03 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c04 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c04 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c04 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c04 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c05 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c05 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c05 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c05 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c06 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c06 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c06 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c06 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c07 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c07 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c07 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c07 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c08 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c08 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c08 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c08 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c09 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c09 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c09 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c09 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c010 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c010 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c010 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c010 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c011 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c011 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c011 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c011 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c012 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c012 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c012 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c012 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c013 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c013 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c013 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c013 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c014 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c014 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c014 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c014 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c015 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c015 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c015 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c015 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB15 and CB15;
  enddef;
  def map between c016 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c016 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c016 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c016 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c017 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c017 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c017 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c017 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c018 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c018 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c018 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c018 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c019 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c019 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c019 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c019 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c020 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c020 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c020 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c020 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c021 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c021 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c021 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c021 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c022 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c022 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c022 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c022 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c023 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c023 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c023 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c023 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c024 and FAt for
    vars FAt and FAt;
  enddef;
  def map between c024 and FBt for
    vars FBt and FBt;
  enddef;
  def map between c024 and F0t for
    vars F0t and F0t;
  enddef;
  def map between c024 and model_parameters for
    vars V1 and V1;
    vars p0 and p0;
    vars CB1 and CB1;
  enddef;
  def map between c17 and c1 for
    vars c1 and c1;
  enddef;
  def map between c17 and c2 for
    vars c2 and c2;
  enddef;
  def map between c17 and c3 for
    vars c3 and c3;
  enddef;
  def map between c17 and c4 for
    vars c4 and c4;
  enddef;
  def map between c17 and c5 for
    vars c5 and c5;
  enddef;
  def map between c17 and c6 for
    vars c6 and c6;
  enddef;
  def map between c17 and c7 for
    vars c7 and c7;
  enddef;
  def map between c17 and c8 for
    vars c8 and c8;
  enddef;
  def map between c17 and c9 for
    vars c9 and c9;
  enddef;
  def map between c17 and c18 for
    vars c17 and c17;
    vars c18 and c18;
  enddef;
  def map between c17 and c19 for
    vars c17 and c17;
    vars c19 and c19;
  enddef;
  def map between pp and c1 for
    vars pp and pp;
  enddef;
  def map between pp and c2 for
    vars pp and pp;
  enddef;
  def map between pp and c3 for
    vars pp and pp;
  enddef;
  def map between pp and c4 for
    vars pp and pp;
  enddef;
  def map between pp and c5 for
    vars pp and pp;
  enddef;
  def map between pp and c6 for
    vars pp and pp;
  enddef;
  def map between pp and c7 for
    vars pp and pp;
  enddef;
  def map between pp and c8 for
    vars pp and pp;
  enddef;
  def map between pp and c9 for
    vars pp and pp;
  enddef;
  def map between pp and c10 for
    vars pp and pp;
  enddef;
  def map between pp and c11 for
    vars pp and pp;
  enddef;
  def map between pp and c12 for
    vars pp and pp;
  enddef;
  def map between pp and c13 for
    vars pp and pp;
  enddef;
  def map between pp and c14 for
    vars pp and pp;
  enddef;
  def map between pp and c15 for
    vars pp and pp;
  enddef;
  def map between pp and c16 for
    vars pp and pp;
  enddef;
  def map between pp and c17 for
    vars pp and pp;
  enddef;
  def map between pp and c18 for
    vars pp and pp;
  enddef;
enddef;
// n2
// N: Family Gerlach; Given J C
// n6
// N: Family Schmidt-Heck; Given W
// n9
// Family: Zeilinger
// Given: KP
// n10
// Family: Pless
// Given: G
// Other: R
// n11
// N: Family Gebhardt; Given R
// n13
// N: Family Guthke; Given R
// n15
// _5: Family Pfaff; Given M
// n25
// issued: W3CDTF 2006-03-21
// title: Dynamic Model of Amino Acid and Carbohydrate Metabolism in Primary Human Liver Cells
// Journal: title ISBMDA 2006
// volume: LNBI 4345
// first_page: 137
// last_page: 149
// n28
// _1: Hepatology
// _2: Liver
// n34
// subject: subject_type keyword
// #guthke_2006
// reference: Pubmed_id 19580741
// species: Human
// bio_entity: Liver
// bio_entity: Hepatocyte
