<?xml version="1.0"?>
<!--
This CellML file was generated on 11/03/2011 at 12:46:38 at p.m. using:

COR (0.9.31.1409)
Copyright 2002-2011 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="schmitmeier_2007_guess_units" name="schmitmeier_2007_a">
   <units name="hour">
      <unit multiplier="36600" units="second"/>
   </units>
   <units name="day">
      <unit multiplier="24" units="hour"/>
   </units>
   <units name="per_day">
      <unit exponent="-1" units="day"/>
   </units>
   <units name="microgram">
      <unit prefix="micro" units="gram"/>
   </units>
   <units name="microgram_per_hour">
      <unit units="microgram"/>
      <unit exponent="-1" units="hour"/>
   </units>
   <units name="molar">
      <unit units="mole"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="CONCENTRATIONO2">
      <unit units="molar"/>
      <unit exponent="-1" units="hour"/>
   </units>
   <units name="CONCENTRATIONH2O2">
      <unit units="molar"/>
      <unit exponent="-1" units="hour"/>
   </units>
   <units name="CONFIRMp1">
      <unit units="molar"/>
      <unit exponent="-1" units="hour"/>
   </units>
   <units name="CONFIRMki">
      <unit units="molar"/>
      <unit exponent="-1" units="hour"/>
   </units>
   <units name="CONFIRMV">
      <unit units="molar"/>
      <unit exponent="-1" units="hour"/>
   </units>
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="hour"/>
   </component>
   <component name="O2">
      <variable cmeta:id="O2_O2" initial_value="0.00235897" name="O2" public_interface="out" units="CONCENTRATIONO2"/>
      <variable initial_value="0.0000143385" name="p1" units="CONFIRMp1"/>
      <variable initial_value="20" name="F1" units="dimensionless"/>
      <variable name="p2" public_interface="in" units="per_day"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>O2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>p1</ci>
                  <ci>F1</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>p2</ci>
                  <ci>O2</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="H2O2">
      <variable cmeta:id="H2O2_H2O2" initial_value="0.000027947" name="H2O2" public_interface="out" units="CONCENTRATIONH2O2"/>
      <variable name="p2" public_interface="in" units="per_day"/>
      <variable name="O2" public_interface="in" units="CONCENTRATIONO2"/>
      <variable initial_value="2.552293418" name="p3" units="per_day"/>
      <variable initial_value="8.379310334" name="p4" units="per_day"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>H2O2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <times/>
                     <ci>p2</ci>
                     <ci>O2</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>p3</ci>
                     <ci>H2O2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>p4</ci>
                  <ci>H2O2</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="V">
      <variable cmeta:id="V_V" name="V" public_interface="out" units="CONFIRMV"/>
      <variable initial_value="10400000" name="Vmax" units="microgram_per_hour"/>
      <variable initial_value="0.000008982" name="ki" units="CONFIRMki"/>
      <variable name="H2O2" public_interface="in" units="CONCENTRATIONH2O2"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>V</ci>
            <apply>
               <times/>
               <ci>Vmax</ci>
               <apply>
                  <divide/>
                  <ci>ki</ci>
                  <apply>
                     <plus/>
                     <ci>ki</ci>
                     <ci>H2O2</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="model_parameters">
      <variable initial_value="0.117425199" name="p2" public_interface="out" units="per_day"/>
   </component>
   <connection>
      <map_components component_1="environment" component_2="O2"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="H2O2"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="V"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="O2"/>
      <map_variables variable_1="p2" variable_2="p2"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="H2O2"/>
      <map_variables variable_1="p2" variable_2="p2"/>
   </connection>
   <connection>
      <map_components component_1="O2" component_2="H2O2"/>
      <map_variables variable_1="O2" variable_2="O2"/>
   </connection>
   <connection>
      <map_components component_1="H2O2" component_2="V"/>
      <map_variables variable_1="H2O2" variable_2="H2O2"/>
   </connection>

<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
    
	<rdf:Description rdf:about="">
      <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
        <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
          <vCard:Family>Nielsen</vCard:Family>
          <vCard:Given>Hanne</vCard:Given>
		  <vCard:Other/>
        </vCard:N>
        <vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
          <rdf:value>hnie010@aucklanduni.ac.nz</rdf:value>
          <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
        </vCard:EMAIL>
        <vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
          <vCard:Orgname>The University of Auckland</vCard:Orgname>
          <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
        </vCard:ORG>
      </dc:creator>
  
      <dcterms:created xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
        <dcterms:W3CDTF>2009-10-08</dcterms:W3CDTF>
      </dcterms:created>
    </rdf:Description>
    
    <rdf:Description rdf:about="#aslanidi_2009">
      
	  <cmeta:species>Human</cmeta:species>
	  
      <cmeta:bio_entity>Livere</cmeta:bio_entity>
	  <cmeta:bio_entity>Hepatocyte</cmeta:bio_entity>
      
      <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource">
        <dc:subject xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>Hepatology</rdf:li>
			  <rdf:li>Liver</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>

      <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource">
        <bqs:Pubmed_id>unknown</bqs:Pubmed_id>
        <bqs:JournalArticle rdf:parseType="Resource">
          <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/">
            <rdf:Seq>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Scmitmeier</vCard:Family>
                    <vCard:Given>Stephanie</vCard:Given>
					<vCard:Other/>
                  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Langsch</vCard:Family>
                    <vCard:Given>Angelika</vCard:Given>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Schmidt-Heck</vCard:Family>
                    <vCard:Given>Wolfgang</vCard:Given>
					<vCard:Other/>
                  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Jasmund</vCard:Family>
                    <vCard:Given>Inka</vCard:Given>
				  </vCard:N>

   </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Bader</vCard:Family>
                    <vCard:Given>Augustinus</vCard:Given>
				  </vCard:N>                </bqs:Person>
              </rdf:li>
            </rdf:Seq>
          </dc:creator>
          <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">
            Improvement of metabolic performance of primary hepatocytes in 
hyperoxic cultures by vitamin C in a novel small-scale bioreactor 
          </dc:title>
          <dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
            <dcterms:W3CDTF>2007-04-08</dcterms:W3CDTF>
          </dcterms:issued>
          <bqs:Journal rdf:parseType="Resource">
            <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Journal or Membrane Science</dc:title>
          </bqs:Journal>
		  <bqs:volume>298</bqs:volume>
          <bqs:first_page>30</bqs:first_page>
          <bqs:last_page>40</bqs:last_page>
        </bqs:JournalArticle>
      </bqs:reference>
    </rdf:Description>
  </rdf:RDF>

</model>