<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  bonhoeffer_model_II_2000.xml

CREATED :  10th December 2003

LAST MODIFIED : 10th December 2003

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of Bonhoeffer et al.'s 2nd 2000 mathematical model of virus dynamics.

CHANGES:  
  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="bonhoeffer_2000" name="bonhoeffer_2000">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Modelling the Population Dynamics of Virus Infected Cells</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
        This CellML model runs in OpenCell and COR to replicate the published results (figure 3 - up until the introduction of the drug, which is not described in this set of equations). The units have been checked and they are consistent. This particular CellML model represents model 2 from the published paper.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: BACKGROUND: Structured interruptions of antiretroviral therapy of HIV-1 infected individuals are currently being tested in clinical trials to study the effect interruptions have on the immune responses and control of virus replication. OBJECTIVE: To investigate the potential risks and benefits of interrupted therapy using standard population dynamical models of HIV replication kinetics. METHODS: Standard population dynamical models were used to study the effect of structured therapy interruptions on the immune effector cells, the latent cell compartment and the emergence of drug resistance. CONCLUSIONS: The models suggest that structured therapy interruption only leads to transient or sustained virus control if the immune effector cells increase during therapy. This increase must more than counterbalance the increase in susceptible target cells induced by therapy. The risk of inducing drug resistance by therapy interruptions or the risk of repopulating the pool of latent cells during drug-free periods may be small if the virus population remains at levels considerably below baseline. However, if the virus load increases during drug-free periods to levels similar to or higher than baseline before therapy, both these risks increase dramatically.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Risks and benefits of structured antiretroviral drug therapy interruptions in HIV-1 infection, Sebastian Bonhoeffer, Michal Rembiszewski, Gabriel M. Ortiz, and Douglas F. Nixon, 2000,
            <emphasis>AIDS</emphasis>, 14, 2313-2322.  <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/11089619">PubMed ID: 11089619</ulink>
</para>

<informalfigure float="0" id="fig_cell_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>cell diagram</title>
    </objectinfo>
    <imagedata fileref="bonhoeffer_rembiszewski_ortiz_nixon_2000.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram of a mathematical model of the interaction between HIV and the immune system.</caption>
</informalfigure>

</sect1>
</article>
</documentation>
  
  
  <units name="day">
    <unit units="second" multiplier="86400.0"/>
  </units>
  
  <units name="first_order_rate_constant">
    <unit units="day" exponent="-1"/>
  </units>
  
  
  <component name="environment">
    <variable units="day" public_interface="out" name="time"/>
  </component>
  
  <component cmeta:id="T" name="T">
    <rdf:RDF>
      <rdf:Description rdf:about="#T">
        <dc:title>T</dc:title>
        <dcterms:alternative>susceptible target cells</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable units="dimensionless" public_interface="out" name="T" initial_value="1.0"/>
    
    <variable units="first_order_rate_constant" name="s" initial_value="10.0"/>
    <variable units="first_order_rate_constant" name="dT" initial_value="0.01"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="b"/>
    <variable units="dimensionless" public_interface="in" name="I"/>
    <variable units="day" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>T</ci> 
        </apply>
        <apply>
          <minus/>
          <ci> s </ci>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> dT </ci>
              <ci> T </ci>
            </apply>
            <apply>
              <times/>
              <ci> b </ci> 
              <ci> T </ci> 
              <ci> I </ci>
            </apply> 
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="I" name="I">
    <rdf:RDF>
      <rdf:Description rdf:about="#I">
        <dc:title>I</dc:title>
        <dcterms:alternative>infected cells</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable units="dimensionless" public_interface="out" name="I" initial_value="1.0"/>
    
    <variable units="first_order_rate_constant" name="p" initial_value="0.05"/>
    <variable units="first_order_rate_constant" name="dI" initial_value="0.3"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="b"/>
    <variable units="first_order_rate_constant" public_interface="in" name="ql"/>
    <variable units="first_order_rate_constant" public_interface="in" name="qa"/>
    <variable units="dimensionless" public_interface="in" name="T"/>
    <variable units="dimensionless" public_interface="in" name="E"/>
    <variable units="day" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>I</ci> 
        </apply>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci> b </ci>
              <ci> T </ci>
              <ci> I </ci>
            </apply>
            <apply>
              <plus/>
              <apply>
                <times/>
                <ci> dI </ci>
                <ci> I </ci>
              </apply>
              <apply>
                <times/>
                <ci> p </ci> 
                <ci> E </ci> 
                <ci> I </ci>
              </apply> 
              <apply>
                <times/>
                <ci> ql </ci> 
                <ci> I </ci>
              </apply> 
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> qa </ci> 
            <ci> I </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="Il" name="Il">
    <rdf:RDF>
      <rdf:Description rdf:about="#Il">
        <dc:title>Il</dc:title>
        <dcterms:alternative>latently infected cells</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable units="dimensionless" public_interface="out" name="Il" initial_value="1.0"/>
    
    <variable units="first_order_rate_constant" name="al" initial_value="0.01"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="ql"/>
    <variable units="first_order_rate_constant" public_interface="in" name="qa"/>
    <variable units="dimensionless" public_interface="in" name="I"/>
    <variable units="day" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>Il</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> ql </ci> 
            <ci> I </ci>
          </apply> 
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> al </ci>
              <ci> Il </ci>
            </apply>
            <apply>
              <times/>
              <ci> qa </ci> 
              <ci> Il </ci>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="E" name="E">
    <rdf:RDF>
      <rdf:Description rdf:about="#E">
        <dc:title>E</dc:title>
        <dcterms:alternative>CTL</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable units="dimensionless" public_interface="out" name="E" initial_value="1.0"/>
    
    <variable units="first_order_rate_constant" name="c" initial_value="0.3"/>
    <variable units="first_order_rate_constant" name="dE" initial_value="0.1"/>
    <variable units="dimensionless" name="K" initial_value="0.1"/>
    <variable units="first_order_rate_constant" name="dE_" initial_value="0.25"/>
    <variable units="dimensionless" name="K_" initial_value="05.0"/>
    
    <variable units="dimensionless" public_interface="in" name="I"/>
    <variable units="day" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>E</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> c </ci>
              <ci> E </ci>
              <ci> I </ci>
            </apply>
            <apply>
              <plus/>
              <ci> I </ci>
              <ci> K </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> dE </ci>
              <ci> E </ci>
            </apply>
            <apply>
              <divide/>
              <apply>
                <times/>
                <ci> dE_ </ci>
                <ci> E </ci>
                <ci> I </ci>
              </apply>
              <apply>
                <plus/>
                <ci> K_ </ci>
                <ci> I </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="kinetic_parameters"> 
    <variable units="first_order_rate_constant" public_interface="out" name="b" initial_value="0.001"/>
    <variable units="first_order_rate_constant" public_interface="out" name="qa" initial_value="0.001"/>
    <variable units="first_order_rate_constant" public_interface="out" name="ql" initial_value="0.001"/>
  </component>
  
  
  <connection>
    <map_components component_2="environment" component_1="T"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="I"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Il"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="E"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="I" component_1="T"/>
    <map_variables variable_2="I" variable_1="I"/>
    <map_variables variable_2="T" variable_1="T"/>
  </connection>
  
  <connection>
    <map_components component_2="E" component_1="I"/>
    <map_variables variable_2="I" variable_1="I"/>
    <map_variables variable_2="E" variable_1="E"/>
  </connection>
  
  <connection>
    <map_components component_2="Il" component_1="I"/>
    <map_variables variable_2="I" variable_1="I"/>
  </connection>
  
  <connection>
    <map_components component_2="kinetic_parameters" component_1="T"/>
    <map_variables variable_2="b" variable_1="b"/>
  </connection>
  
  <connection>
    <map_components component_2="kinetic_parameters" component_1="I"/>
    <map_variables variable_2="b" variable_1="b"/>
    <map_variables variable_2="qa" variable_1="qa"/>
    <map_variables variable_2="ql" variable_1="ql"/>
  </connection>
  
  <connection>
    <map_components component_2="kinetic_parameters" component_1="Il"/>
    <map_variables variable_2="qa" variable_1="qa"/>
    <map_variables variable_2="ql" variable_1="ql"/>
  </connection>
  






<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  <rdf:Seq rdf:about="rdf:#citationAuthorsSeq">
    <rdf:li rdf:resource="rdf:#author1Vcard"/>
    <rdf:li rdf:resource="rdf:#author2Vcard"/>
    <rdf:li rdf:resource="rdf:#author3Vcard"/>
    <rdf:li rdf:resource="rdf:#author4Vcard"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#author1VcardN">
    <vCard:Given>Sebastian</vCard:Given>
    <vCard:Family>Bonhoeffer</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#641f2363-c505-4cb4-9b49-5e84ffdb5378">
    <dc:title>AIDS</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bfbddaab-284d-478e-b03f-de3e436174b3">
    <dcterms:W3CDTF>2000-10-20</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="">
  <dc:title>Risks and benefits of structured antiretroviral drug therapy interruptions in HIV-1 infection: Model 2</dc:title>
    <dc:publisher>
        The University of Auckland, Auckland Bioengineering Institute
      </dc:publisher>
    <dcterms:created rdf:resource="rdf:#565ec160-fb31-4d45-b76a-b4043eaec009"/>
    <dc:creator rdf:resource="rdf:#00e6145d-ead3-4fb8-90b6-d96bd5090674"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#author4Vcard">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#author4VcardN"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#author3VcardN">
    <vCard:Given>Gabriel</vCard:Given>
    <vCard:Family>Ortiz</vCard:Family>
    <vCard:Other>M</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#author2VcardN">
    <vCard:Given>Michal</vCard:Given>
    <vCard:Family>Rembiszewski</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b738076c-4d9c-4444-a966-0ee7a1412506">
    <bqs:Pubmed_id>11089619</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#3a432581-af55-4280-b9b3-955afe218aeb"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#author2Vcard">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#author2VcardN"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#565ec160-fb31-4d45-b76a-b4043eaec009">
    <dcterms:W3CDTF>2003-12-10</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#28849504-3705-4407-a3b4-4a11059dfc08">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="#bonhoeffer_2000">
    <dc:title>
        Bonhoeffer et al.'s 2nd 2000 mathematical model of virus dynamics.
      </dc:title>
    <cmeta:comment rdf:resource="rdf:#f992e1e4-27d4-4861-96b2-0722ce3187ce"/>
    <bqs:reference rdf:resource="rdf:#643d2ac9-6351-46d0-9b9e-e5d8b0261621"/>
    <bqs:reference rdf:resource="rdf:#b738076c-4d9c-4444-a966-0ee7a1412506"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#30a6e958-6dbf-473a-a5ff-fadcbe09eca1">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#643d2ac9-6351-46d0-9b9e-e5d8b0261621">
    <dc:subject rdf:resource="rdf:#0d7450ce-e95c-401a-9712-428f21c536fb"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#author4VcardN">
    <vCard:Given>Douglas</vCard:Given>
    <vCard:Family>Nixon</vCard:Family>
    <vCard:Other>F</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#author1Vcard">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#author1VcardN"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#00e6145d-ead3-4fb8-90b6-d96bd5090674">
    <vCard:ORG rdf:resource="rdf:#0f999bba-345a-4c2a-b6b5-1f2a4aa1bf7e"/>
    <vCard:EMAIL rdf:resource="rdf:#30a6e958-6dbf-473a-a5ff-fadcbe09eca1"/>
    <vCard:N rdf:resource="rdf:#28849504-3705-4407-a3b4-4a11059dfc08"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f992e1e4-27d4-4861-96b2-0722ce3187ce">
    <dc:creator rdf:resource="rdf:#ddf78999-f926-4a07-865a-22f079156f13"/>
    <rdf:value>This is the CellML description of Bonhoeffer et al.'s 2nd 2000 mathematical model of virus dynamics.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#author3Vcard">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#author3VcardN"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3a432581-af55-4280-b9b3-955afe218aeb">
    <dc:creator rdf:resource="rdf:#citationAuthorsSeq"/>
    <dc:title>Risks and benefits of structured antiretroviral drug therapy interruptions in HIV-1 infection</dc:title>
    <bqs:volume>14</bqs:volume>
    <bqs:first_page>2313</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#641f2363-c505-4cb4-9b49-5e84ffdb5378"/>
    <dcterms:issued rdf:resource="rdf:#bfbddaab-284d-478e-b03f-de3e436174b3"/>
    <bqs:last_page>2322</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0d7450ce-e95c-401a-9712-428f21c536fb">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value>
            <rdf:Bag>
              <rdf:li>immunology</rdf:li>
            </rdf:Bag>
          </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ddf78999-f926-4a07-865a-22f079156f13">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0f999bba-345a-4c2a-b6b5-1f2a4aa1bf7e">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
</rdf:RDF>
</model>