<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  nevo_model_2004.xml

CREATED :  25th October 2004

LAST MODIFIED : 25th October 2004

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of Nevo et al.'s 2004 mathematical model of autoimmunity.

CHANGES:  
  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="nevo_2004" name="nevo_2004">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Autoimmunity as an immune defense against degenerative processes: a primary mathematical model illustrating the bright side of autoimmunity</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>This model contains partial differentials and as such can not currently be solved by existing CellML tools..
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: Self-tolerance, or the ability of the immune system to refrain from destroying the organism's own tissues, is a prerequisite for proper immune system operation. How such self-tolerance is achieved is still a subject of debate. The belief that autoimmunity poses a continuous threat to the organism was challenged by data demonstrating that autoimmunity has a protective function after traumatic injury to the central nervous system. This finding led us to suggest the 'comprehensive immunity' approach by which autoimmunity is viewed as a special case of immunity, namely as a defense mechanism that operates by fighting against the threat of potential destructive activity originated or mediated within the organism, similarly to the immune defense that operates against the threat from exogenous pathogens. We present a primary mathematical spatio-temporal model that supports this concept. The numerical solutions of this model illustrate the beneficial operation of a well-controlled immune response specific to self-antigens residing in the site of lesion. The model also explains how the response to self might be tolerated on a day-to-day basis. In addition, we demonstrate that the same autoimmune response, operating at different levels of regulation, can lead to either an autoimmune disease or a degenerative disorder. This preliminary qualitative model supports our contention that the way autoimmunity is perceived should be revised.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Autoimmunity as an immune defense against degenerative processes: a primary mathematical model illustrating the bright side of autoimmunity, Uri Nevo, Ido Golding, Avidan U. Neumann, Michal Schwartz, and Solange Akselrod, 2004, <emphasis>Journal of Theoretical Biology</emphasis>, 227, 583-592. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=15038992&amp;dopt=Abstract">PubMed ID: 15038992</ulink>
</para>

<informalfigure float="0" id="fig_cell_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>cell diagram</title>
    </objectinfo>
    <imagedata fileref="nevo_2004.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram of the mathematical model.  Healthy cells (H) can be lost via two routes, 1) self-perpetuating death (H-N-D), or 2) immune-mediated loss (H-P-D).</caption>
</informalfigure>

</sect1>
</article>
</documentation>
  
  
  
  <units name="day">
    <unit units="second" multiplier="86400.0"/>
  </units>
  
  
  <component name="environment">
    <variable units="day" public_interface="out" name="time"/>
  </component>
  
  <component name="h" cmeta:id="h">
      
    <variable units="dimensionless" public_interface="out" name="h"/>
    
    <variable units="dimensionless" public_interface="in" name="Tn"/>
    <variable units="dimensionless" public_interface="in" name="Tp"/>
    <variable units="day" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>h</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <ci> Tn </ci>
            <ci> Tp </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="n" cmeta:id="n">
      
    <variable units="dimensionless" public_interface="out" name="n"/>
    
    <variable units="dimensionless" name="lamda_n" initial_value="1.0"/>
    
    <variable units="dimensionless" public_interface="in" name="Tn"/>
    <variable units="day" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>n</ci> 
        </apply>
        <apply>
          <minus/>
          <ci> Tn </ci>
          <apply>
            <times/>
            <ci> lamda_n </ci>
            <ci> n </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="p" cmeta:id="p">
      
    <variable units="dimensionless" public_interface="out" name="p"/>
    
    <variable units="dimensionless" name="lamda_p" initial_value="1.0"/>
    
    <variable units="dimensionless" public_interface="in" name="Tp"/>
    <variable units="day" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>p</ci> 
        </apply>
        <apply>
          <minus/>
          <ci> Tp </ci>
          <apply>
            <times/>
            <ci> lamda_p </ci>
            <ci> p </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="s1" cmeta:id="s1">
      
    <variable units="dimensionless" public_interface="out" name="s1"/>
    
    <variable units="dimensionless" name="K1" initial_value="1.0"/>
    <variable units="dimensionless" name="D1" initial_value="0.4"/>
    <variable units="dimensionless" name="lamda_1" initial_value="0.05"/>
    
    <variable units="dimensionless" public_interface="in" name="n"/>
    <variable units="day" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <partialdiff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>s1</ci> 
        </apply>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci> K1 </ci>
              <ci> n </ci>
            </apply>
            <apply>
              <times/>
              <ci> lamda_1 </ci>
              <ci> s1 </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> D1 </ci>
            <ci> s1 </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="s2" cmeta:id="s2">
      
    <variable units="dimensionless" public_interface="out" name="s2"/>
    
    <variable units="dimensionless" name="K2" initial_value="1.0"/>
    <variable units="dimensionless" name="D2" initial_value="0.4"/>
    <variable units="dimensionless" name="lamda_2" initial_value="0.05"/>
    
    <variable units="dimensionless" public_interface="in" name="n"/>
    <variable units="day" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>s2</ci> 
        </apply>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci> K2 </ci>
              <ci> n </ci>
            </apply>
            <apply>
              <times/>
              <ci> lamda_2 </ci>
              <ci> s2 </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> D2 </ci>
            <ci> s2 </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="Tn" cmeta:id="Tn">
      
    <variable units="dimensionless" public_interface="out" name="Tn"/>
    
    <variable units="dimensionless" name="eta_n" initial_value="0.2"/>
    <variable units="dimensionless" name="s1_min" initial_value="0.01"/>
    
    <variable units="dimensionless" public_interface="in" name="s1"/>
    <variable units="dimensionless" public_interface="in" name="h"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci>Tn</ci> 
        <piecewise>
          <piece>
            <apply>
              <times/>
              <ci> eta_n </ci>
              <ci> h </ci>
              <apply>
                <minus/>
                <ci> s1 </ci>
                <ci> s1_min </ci>
              </apply>
            </apply>
            <apply>
              <lt/>
              <ci> s1_min </ci>
              <ci> s1 </ci> 
            </apply>
          </piece>
          <otherwise>
            <cn cellml:units="dimensionless"> 0.0 </cn>
          </otherwise>
        </piecewise>
      </apply>    
    </math>
  </component>
  
  <component name="Tp" cmeta:id="Tp">
      
    <variable units="dimensionless" public_interface="out" name="Tp"/>
    
    <variable units="dimensionless" name="eta_p" initial_value="0.2"/>
    
    <variable units="dimensionless" public_interface="in" name="E"/>
    <variable units="dimensionless" public_interface="in" name="s2"/>
    <variable units="dimensionless" public_interface="in" name="h"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci>Tp</ci> 
        <apply>
          <times/>
          <ci> eta_p </ci>
          <ci> h </ci>
          <ci> E </ci>
          <ci> s2 </ci>
        </apply> 
      </apply>    
    </math>
  </component>
  
  <component name="E" cmeta:id="E">
      
    <variable units="dimensionless" public_interface="out" name="E"/>
    
    <variable units="dimensionless" name="lamda_E" initial_value="0.005"/>
    <variable units="dimensionless" name="s2_min" initial_value="0.01"/>
    
    <variable units="dimensionless" public_interface="in" name="fw"/>
    <variable units="dimensionless" public_interface="in" name="s2_"/>
    <variable units="day" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>E</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> fw </ci>
            <apply>
              <minus/>
              <ci> s2_ </ci>
              <ci> s2_min </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> lamda_E </ci>
            <ci> E </ci>
          </apply> 
        </apply> 
      </apply>    
    </math>
  </component>
  
  <component name="fw">  
    <variable units="dimensionless" public_interface="out" name="fw"/>
    
    <variable units="dimensionless" name="c"/>
    <variable units="dimensionless" name="w" initial_value="1000.0"/>
    
    <variable units="dimensionless" public_interface="in" name="x"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci>fw</ci> 
        <apply>
          <divide/>
          <cn cellml:units="dimensionless"> 1.0 </cn>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <apply>
                    <minus/>
                    <ci> x </ci>
                    <ci> c </ci>
                  </apply>
                </apply>
                <ci> w </ci>
              </apply>
            </apply>
          </apply>
        </apply> 
      </apply>    
    </math>
  </component>
  
  <component name="s2_">  
    <variable units="dimensionless" public_interface="out" name="s2_"/>
   
    <variable units="dimensionless" public_interface="in" name="s2"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci>s2_</ci> 
        <ci> s2 </ci>
      </apply>    
    </math>
  </component>
  
  <component name="model_parameters"> 
    <variable units="dimensionless" public_interface="out" name="x"/>
  </component>
  
  
  <connection>
    <map_components component_2="environment" component_1="h"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="n"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="p"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="s1"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="s2"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="E"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="model_parameters" component_1="fw"/>
    <map_variables variable_2="x" variable_1="x"/>
  </connection>
  
  <connection>
    <map_components component_2="Tn" component_1="h"/>
    <map_variables variable_2="Tn" variable_1="Tn"/>
    <map_variables variable_2="h" variable_1="h"/>
  </connection>
  
  <connection>
    <map_components component_2="Tp" component_1="h"/>
    <map_variables variable_2="Tp" variable_1="Tp"/>
    <map_variables variable_2="h" variable_1="h"/>
  </connection>
  
  <connection>
    <map_components component_2="Tn" component_1="n"/>
    <map_variables variable_2="Tn" variable_1="Tn"/>
  </connection>
  
  <connection>
    <map_components component_2="Tp" component_1="p"/>
    <map_variables variable_2="Tp" variable_1="Tp"/>
  </connection>
  
  <connection>
    <map_components component_2="n" component_1="s1"/>
    <map_variables variable_2="n" variable_1="n"/>
  </connection>
  
  <connection>
    <map_components component_2="n" component_1="s2"/>
    <map_variables variable_2="n" variable_1="n"/>
  </connection>
  
  <connection>
    <map_components component_2="s1" component_1="Tn"/>
    <map_variables variable_2="s1" variable_1="s1"/>
  </connection>
  
  <connection>
    <map_components component_2="s2" component_1="Tp"/>
    <map_variables variable_2="s2" variable_1="s2"/>
  </connection>
  
  <connection>
    <map_components component_2="E" component_1="Tp"/>
    <map_variables variable_2="E" variable_1="E"/>
  </connection>
  
  <connection>
    <map_components component_2="fw" component_1="E"/>
    <map_variables variable_2="fw" variable_1="fw"/>
  </connection>
  
  <connection>
    <map_components component_2="s2_" component_1="E"/>
    <map_variables variable_2="s2_" variable_1="s2_"/>
  </connection>
  
  <connection>
    <map_components component_2="s2" component_1="s2_"/>
    <map_variables variable_2="s2" variable_1="s2"/>
  </connection>
  


<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#f81b2ad8-314f-405e-8fe3-189b9b814ea6">
    <rdf:li>immunology</rdf:li>
    <rdf:li>autoimmunity</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#2bf66138-5c78-45ff-85d3-9327eb5eea52">
    <rdf:li rdf:resource="rdf:#24593d2a-f4d6-431d-8f97-3471ac7d9309"/>
    <rdf:li rdf:resource="rdf:#24fb2170-1151-433a-b960-4fdaa7a70646"/>
    <rdf:li rdf:resource="rdf:#79888c0c-b9f2-4f20-9143-02c76ab10da6"/>
    <rdf:li rdf:resource="rdf:#b8f5b6ea-6209-4a74-838c-cbee3f02a515"/>
    <rdf:li rdf:resource="rdf:#bca42818-48a1-4167-89df-5cdf291acba5"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#faec4167-2714-42fb-a669-fe1ca2d0737b">
    <dc:creator rdf:resource="rdf:#86db7bd5-963e-4ff0-9031-c8f7cfd4ce3c"/>
    <rdf:value>
          This is the CellML description of Nevo et al.'s 2004 mathematical model of autoimmunity.
        </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="#E">
    <dcterms:alternative>immune stimulation</dcterms:alternative>
    <dc:title>E</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#45efbc46-1d68-4c5a-a03e-9e02dc2bc4a9">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b8f5b6ea-6209-4a74-838c-cbee3f02a515">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#d57c8996-27b6-4c8c-9183-ec5faeb43128"/>
  </rdf:Description>
  <rdf:Description rdf:about="#p">
    <dcterms:alternative>immune-mediated tissue loss</dcterms:alternative>
    <dc:title>p</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#Tn">
    <dcterms:alternative>transition to the negative loss pathway</dcterms:alternative>
    <dc:title>Tn</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#933a84dc-02c1-41fb-abff-994450260ee3">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3308dd49-fd0b-43b0-ba5c-3b444fcdb6b5">
    <vCard:ORG rdf:resource="rdf:#45efbc46-1d68-4c5a-a03e-9e02dc2bc4a9"/>
    <vCard:EMAIL rdf:resource="rdf:#36baf971-9cc0-409d-8072-8c054021efde"/>
    <vCard:N rdf:resource="rdf:#933a84dc-02c1-41fb-abff-994450260ee3"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#24593d2a-f4d6-431d-8f97-3471ac7d9309">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#0109d1be-d086-468e-9c33-652c29d433f2"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0109d1be-d086-468e-9c33-652c29d433f2">
    <vCard:Given>Uri</vCard:Given>
    <vCard:Family>Nevo</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="#Tp">
    <dcterms:alternative>transition to the positive loss pathway</dcterms:alternative>
    <dc:title>Tp</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#n">
    <dcterms:alternative>self-perpetuating tissue loss</dcterms:alternative>
    <dc:title>n</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#h">
    <dcterms:alternative>healthy tissue</dcterms:alternative>
    <dc:title>h</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8deaa8bb-ea81-4e30-823e-29e128dab2db">
    <bqs:Pubmed_id>15038992</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#639c0922-f90d-4164-b5d5-0e0923e458f2"/>
  </rdf:Description>
  <rdf:Description rdf:about="#s1">
    <dcterms:alternative>damage inducing signal</dcterms:alternative>
    <dc:title>s1</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#s2">
    <dcterms:alternative>alerting signal</dcterms:alternative>
    <dc:title>s2</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#36baf971-9cc0-409d-8072-8c054021efde">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#79888c0c-b9f2-4f20-9143-02c76ab10da6">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#6a91bdef-3c98-4e36-ad39-fcda93e94d26"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a832820f-247f-4acd-b82d-14303484a585">
    <vCard:Given>Ido</vCard:Given>
    <vCard:Family>Golding</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a9986e22-bbeb-407d-89c2-3bf8e42b5cd6">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#f81b2ad8-314f-405e-8fe3-189b9b814ea6"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2754d7c8-a134-4560-86f5-c18ee2c4fa4a">
    <dc:subject rdf:resource="rdf:#a9986e22-bbeb-407d-89c2-3bf8e42b5cd6"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d082fa7c-3ee1-47bd-9aec-91abe6aceb81">
    <dcterms:W3CDTF>2004-10-25</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#639c0922-f90d-4164-b5d5-0e0923e458f2">
    <dc:creator rdf:resource="rdf:#2bf66138-5c78-45ff-85d3-9327eb5eea52"/>
    <dc:title>
            Autoimmunity as an immune defense against degenerative processes: a 
            primary mathematical model illustrating the bright side of 
            autoimmunity
          </dc:title>
    <bqs:volume>227</bqs:volume>
    <bqs:first_page>583</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#2cbeed82-cd3b-4b0c-9f12-848e2eb1ffd5"/>
    <dcterms:issued rdf:resource="rdf:#7ea6d0ad-7bd2-463e-b1c3-d50721315f41"/>
    <bqs:last_page>592</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bca42818-48a1-4167-89df-5cdf291acba5">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#25172359-ed3c-4e47-b666-f5fbd9825ae2"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#24fb2170-1151-433a-b960-4fdaa7a70646">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#a832820f-247f-4acd-b82d-14303484a585"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2cbeed82-cd3b-4b0c-9f12-848e2eb1ffd5">
    <dc:title>Journal of Theoretical Biology</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d57c8996-27b6-4c8c-9183-ec5faeb43128">
    <vCard:Given>Michal</vCard:Given>
    <vCard:Family>Schwartz</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7ea6d0ad-7bd2-463e-b1c3-d50721315f41">
    <dcterms:W3CDTF>2004-04-21</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#86db7bd5-963e-4ff0-9031-c8f7cfd4ce3c">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:creator rdf:resource="rdf:#3308dd49-fd0b-43b0-ba5c-3b444fcdb6b5"/>
    <dc:publisher>
      The University of Auckland, Bioengineering Institute
    </dc:publisher>
    <dc:title>
      Nevo et al.'s 2004 mathematical model of autoimmunity.
    </dc:title>
    <dcterms:created rdf:resource="rdf:#d082fa7c-3ee1-47bd-9aec-91abe6aceb81"/>
  </rdf:Description>
  <rdf:Description rdf:about="#nevo_2004">
    <bqs:reference rdf:resource="rdf:#2754d7c8-a134-4560-86f5-c18ee2c4fa4a"/>
    <bqs:reference rdf:resource="rdf:#8deaa8bb-ea81-4e30-823e-29e128dab2db"/>
    <cmeta:comment rdf:resource="rdf:#faec4167-2714-42fb-a669-fe1ca2d0737b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6a91bdef-3c98-4e36-ad39-fcda93e94d26">
    <vCard:Given>Avidan</vCard:Given>
    <vCard:Family>Neumann</vCard:Family>
    <vCard:Other>U</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#25172359-ed3c-4e47-b666-f5fbd9825ae2">
    <vCard:Given>Solange</vCard:Given>
    <vCard:Family>Akselrod</vCard:Family>
  </rdf:Description>
</rdf:RDF>
</model>