<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  stilianakis_model_1997.xml

CREATED :  25th August 2004

LAST MODIFIED : 25th August 2004

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of Stilianakis et al's 1997 mathematical model for the pathogenesis of AIDS. 

CHANGES:  
  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="stilianakis_1997" name="stilianakis_1997">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Modelling the Pathogenesis of AIDS</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
           This CellML model runs in OpenCell and COR but does not recreate the published results (figure 1). The units have been checked and they are consistent. The equations appear to match those in the paper (1-5) and the parameter values have been taken from table 1. The CellML model simulation output fails to oscillate.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: According to a previously proposed mathematical model, the pathogenesis of acquired immunodeficiency syndrome (AIDS) could be explained by two phenomena: direct human immunodeficiency virus (HIV) infection of CD4+ T-cell populations and ongoing generation and selection of HIV mutants with increasing replicative capacity. In the present paper, the results obtained with this model are described in more detail. For different values of biologically interpretable parameters, the model predicts very different patterns of CD4+ T-cell decline after primary infection. With the assumption of a variability of 10% to 25% of three parameters between infected individuals, the model yields a realistic distribution curve of the incubation period to AIDS. 
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Analysis of a model for the pathogenesis of AIDS, Stilianakis NI, Dietz K, and Schenzle D, 1997,
            <emphasis>Mathematical Biosciences</emphasis>, 145, 27-46. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/9271894">PubMed ID: 9271894</ulink>
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>reaction diagram</title>
    </objectinfo>
    <imagedata fileref="stiliankis_1997.png"/>
  </imageobject>
</mediaobject>
<caption>A schematic diagram showing how susceptible T cells are infected by free HIV particles at a rate K to become infected T cells.  This process is influenced by the anti-HIV activity of the immune system against infected T cells and HIV. Note: X: The number of susceptible (non-infected) CD4+ T cells, Y: The number of HIV-infected CD4+ T cells, V: The number of free HIV particles, Z: The anti-HIV activity of the immune system towards removing infected CD4+ T cells and HIV, and K: The rate at which HIV infects susceptible CD4+ T cells.</caption>
</informalfigure>

</sect1>
</article>
</documentation>
  
  
  
  <units name="day">
    <unit units="second" multiplier="86400"/>
  </units>
  
  <units name="first_order_rate_constant">  
    <unit units="day" exponent="-1"/>
  </units>
  
  
  <component name="environment">
    <variable units="day" public_interface="out" name="time"/>
  </component>
  
  <component cmeta:id="X" name="X">
      
    <variable units="dimensionless" public_interface="out" name="X" initial_value="1.0E11"/>
    
    <variable units="first_order_rate_constant" name="mu0" initial_value="4.0E-3"/>
    <variable units="first_order_rate_constant" name="lamda" initial_value="4.0E8"/>
    
    <variable units="day" public_interface="in" name="time"/>
    <variable units="first_order_rate_constant" public_interface="in" name="K"/>
    <variable units="dimensionless" public_interface="in" name="V"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="X_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> X </ci>
        </apply>
        <apply>
          <minus/>
          <ci> lamda </ci>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> mu0 </ci>
              <ci> X </ci>
            </apply>
            <apply>
              <times/>
              <ci> K </ci>
              <ci> V </ci>
              <ci> X </ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="Y" name="Y">
      
    <variable units="dimensionless" public_interface="out" name="Y" initial_value="1.0"/>
    
    <variable units="first_order_rate_constant" name="mu1" initial_value="0.30"/>
    <variable units="dimensionless" name="a" initial_value="1.0"/>
    
    <variable units="day" public_interface="in" name="time"/>
    <variable units="first_order_rate_constant" public_interface="in" name="K"/>
    <variable units="dimensionless" public_interface="in" name="V"/>
    <variable units="dimensionless" public_interface="in" name="X"/>
    <variable units="dimensionless" public_interface="in" name="Z"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Y_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> Y </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> K </ci>
            <ci> V </ci>
            <ci> Y </ci>
          </apply>
          <apply>
            <times/>
            <ci> mu1 </ci>
            <apply>
              <plus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <apply>
                <times/>
                <ci> a </ci>
                <ci> Z </ci>
              </apply>
            </apply>
            <ci> Y </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="CD4" name="CD4">
    <rdf:Description rdf:about="#CD4">
      <dcterms:alternative>total number of CD4+ T cells (susceptible and infected)</dcterms:alternative>
      <dc:title>CD4</dc:title>
    </rdf:Description> 
    <variable units="dimensionless" name="CD4"/>
    
    <variable units="dimensionless" public_interface="in" name="X"/>
	<variable units="dimensionless" public_interface="in" name="Y"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="CD4_eq">
        <eq/>
        <ci> CD4 </ci>
        <apply>
          <divide/>
          <apply>
            <plus/>
            <ci> X </ci>
            <ci> Y </ci>
          </apply>
		  <cn type="e-notation" cellml:units="dimensionless">1.0<sep/>11</cn>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="V" name="V">
      
    <variable units="dimensionless" public_interface="out" name="V" initial_value="1.0"/>
    
    <variable units="first_order_rate_constant" name="mu2" initial_value="1.0"/>
    <variable units="first_order_rate_constant" name="beta" initial_value="1.0E3"/>
    <variable units="dimensionless" name="b" initial_value="1.0"/>
    
    <variable units="day" public_interface="in" name="time"/>
    <variable units="dimensionless" public_interface="in" name="Y"/>
    <variable units="dimensionless" public_interface="in" name="Z"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="V_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> V </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> beta </ci>
            <ci> Y </ci>
          </apply>
          <apply>
            <times/>
            <ci> mu2 </ci>
            <apply>
              <plus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <apply>
                <times/>
                <ci> b </ci>
                <ci> Z </ci>
              </apply>
            </apply>
            <ci> V </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="Z" name="Z">
      
    <variable units="dimensionless" public_interface="out" name="Z" initial_value="0.0"/>
    
    <variable units="first_order_rate_constant" name="theta" initial_value="1.0E-6"/>
    <variable units="first_order_rate_constant" name="rho" initial_value="0.50"/>
    <variable units="dimensionless" name="f_X"/>
    <variable units="dimensionless" name="g_V"/>
    <variable units="dimensionless" name="C1" initial_value="0.04"/>
    <variable units="dimensionless" name="C2" initial_value="1.0E3"/>
    <variable units="dimensionless" name="X0" initial_value="1.0E11"/>
    
    <variable units="day" public_interface="in" name="time"/>
    <variable units="dimensionless" public_interface="in" name="V"/>
    <variable units="dimensionless" public_interface="in" name="X"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Z_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> Z </ci>
        </apply>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci> theta </ci>
            <ci> g_V </ci>
          </apply>
          <apply>
            <times/>
            <ci> rho </ci>
            <apply>
              <minus/>
              <ci> f_X </ci>
              <ci> Z </ci>
            </apply>
            <ci> Z </ci>
          </apply>
        </apply>
      </apply>
      
      <apply id="f_X_eq">
        <eq/>
        <ci> f_X </ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <apply>
              <plus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <ci> C1 </ci>
            </apply>
            <apply>
              <power/>
              <apply>
                <divide/>
                <ci> X </ci>
                <ci> X0 </ci>
              </apply>
              <cn cellml:units="dimensionless"> 2.0 </cn>
            </apply>
          </apply>
          <apply>
            <plus/>
            <ci> C1 </ci>
            <apply>
              <power/>
              <apply>
                <divide/>
                <ci> X </ci>
                <ci> X0 </ci>
              </apply>
              <cn cellml:units="dimensionless"> 2.0 </cn>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="g_V_eq">
        <eq/>
        <ci> g_V </ci>
        <apply>
          <divide/>
          <ci> V </ci>
          <apply>
            <plus/>
            <ci> C2 </ci>
            <ci> V </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="K" name="K">
      
    <variable units="first_order_rate_constant" public_interface="out" name="K" initial_value="1.35E-14"/>
    
    <variable units="first_order_rate_constant" name="omega" initial_value="1.0E-16"/>
    <variable units="first_order_rate_constant" name="Kmax" initial_value="20.0"/>
    
    <variable units="day" public_interface="in" name="time"/>
    <variable units="dimensionless" public_interface="in" name="V"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="K_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> K </ci>
        </apply>
        <apply>
          <times/>
          <ci> omega </ci>
          <ci> V </ci>
          <apply>
            <minus/>
            <ci> Kmax </ci>
            <ci> K </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  
  <connection>
    <map_components component_2="environment" component_1="X"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Y"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="V"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Z"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="K"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="V" component_1="X"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
  
  <connection>
    <map_components component_2="K" component_1="X"/>
    <map_variables variable_2="K" variable_1="K"/>
  </connection>
  
  <connection>
    <map_components component_2="V" component_1="Y"/>
    <map_variables variable_2="V" variable_1="V"/>
    <map_variables variable_2="Y" variable_1="Y"/>
  </connection>
  
  <connection>
    <map_components component_2="X" component_1="Y"/>
    <map_variables variable_2="X" variable_1="X"/>
  </connection>
  
  <connection>
    <map_components component_2="K" component_1="Y"/>
    <map_variables variable_2="K" variable_1="K"/>
  </connection>
  
  <connection>
    <map_components component_2="Z" component_1="Y"/>
    <map_variables variable_2="Z" variable_1="Z"/>
  </connection>
  
  <connection>
    <map_components component_2="Z" component_1="V"/>
    <map_variables variable_2="Z" variable_1="Z"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
  
  <connection>
    <map_components component_2="X" component_1="Z"/>
    <map_variables variable_2="X" variable_1="X"/>
  </connection>
  
  <connection>
    <map_components component_2="V" component_1="K"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
  
  <connection>
    <map_components component_2="X" component_1="CD4"/>
    <map_variables variable_2="X" variable_1="X"/>
  </connection>
  
  <connection>
    <map_components component_2="Y" component_1="CD4"/>
    <map_variables variable_2="Y" variable_1="Y"/>
  </connection>
  


<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#e3e20eeb-86fc-49e8-b45c-e11df320b748">
    <rdf:li>viral dynamics</rdf:li>
    <rdf:li>aids</rdf:li>
    <rdf:li>hiv-1</rdf:li>
    <rdf:li>immunology</rdf:li>
    <rdf:li>AIDS</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#fb51f8ad-3ee6-4e38-b08e-2b63b590f490">
    <rdf:li rdf:resource="rdf:#1a11e265-8beb-4d0d-955d-80f4eb765f27"/>
    <rdf:li rdf:resource="rdf:#f4101475-cf72-4217-bd8b-d753bb477f00"/>
    <rdf:li rdf:resource="rdf:#0887a91d-1596-41f7-9782-91235342796a"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#cfa26387-fe39-4425-8aeb-35155685aa5b">
    <dcterms:modified rdf:resource="rdf:#59a7774e-ca74-419d-b9a0-ff8c32a5037c"/>
    <rdf:value>Fixed bullet points in model documentation</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#564a77c3-3e1e-41c8-b021-9fad20d0ade5"/>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher>
        The University of Auckland, Auckland Bioengineering Institute
      </dc:publisher>
    <cmeta:modification rdf:resource="rdf:#cfa26387-fe39-4425-8aeb-35155685aa5b"/>
    <dcterms:created rdf:resource="rdf:#c2508f07-44e6-4f6e-ae7a-bb891412fcfc"/>
    <dc:creator rdf:resource="rdf:#012d1f1e-6312-4618-b5b7-0a9a8b1cb006"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#012d1f1e-6312-4618-b5b7-0a9a8b1cb006">
    <vCard:ORG rdf:resource="rdf:#5d5fa532-e205-486f-b652-0e619a6588d9"/>
    <vCard:EMAIL rdf:resource="rdf:#becc297f-614f-4bf3-96a0-6b141e230f0b"/>
    <vCard:N rdf:resource="rdf:#6f0f269b-8b1d-4427-be2c-d90d5c290b62"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5d5fa532-e205-486f-b652-0e619a6588d9">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#19aac6f7-3b04-4f2d-8b59-f161b28610fc">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#820c829b-ca14-42ca-8816-7e383c146954">
    <dc:creator rdf:resource="rdf:#19aac6f7-3b04-4f2d-8b59-f161b28610fc"/>
    <rdf:value>
          This is the CellML description of Stilianakis et al's 1997 mathematical model for the pathogenesis of AIDS.
        </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0887a91d-1596-41f7-9782-91235342796a">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#b76abc5e-9f0e-45c6-87d7-3b2a781cfd5a"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f536d1b8-7a5b-43cc-8ef5-aa2fdb8d6ca9">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#e3e20eeb-86fc-49e8-b45c-e11df320b748"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ce48dedd-556d-463a-a7c3-de40fccdacb2">
    <dc:title>Mathematical Biosciences</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5d028a70-9256-4e98-8fbf-39d7ccfa66a9">
    <bqs:Pubmed_id>9271894</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#40a4b63d-3a3d-41ac-b679-c1e616c5c086"/>
  </rdf:Description>
  <rdf:Description rdf:about="#K">
    <dcterms:alternative>CD4+ T cell infection rate</dcterms:alternative>
    <dc:title>K</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bd899796-eb64-4cce-b1a5-4afc84f89cd6">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="#V">
    <dcterms:alternative>free HIV particles</dcterms:alternative>
    <dc:title>V</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#becc297f-614f-4bf3-96a0-6b141e230f0b">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="#stilianakis_1997">
    <dc:title>
         Stilianakis et al's 1997 mathematical model for the pathogenesis of AIDS.
      </dc:title>
    <cmeta:bio_entity>T-cells</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#820c829b-ca14-42ca-8816-7e383c146954"/>
    <bqs:reference rdf:resource="rdf:#5d028a70-9256-4e98-8fbf-39d7ccfa66a9"/>
    <bqs:reference rdf:resource="rdf:#97849402-1859-4f1b-8d37-873283d449e1"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8a3d5c64-4fe8-4b38-8e22-7026a911b34b">
    <dcterms:W3CDTF>1997-10-01</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="#Z">
    <dcterms:alternative>anti-HIV activity</dcterms:alternative>
    <dc:title>Z</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#X">
    <dcterms:alternative>susceptible CD4+ T cells</dcterms:alternative>
    <dc:title>X</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#Y">
    <dcterms:alternative>infected CD4+ T cells</dcterms:alternative>
    <dc:title>Y</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c2508f07-44e6-4f6e-ae7a-bb891412fcfc">
    <dcterms:W3CDTF>2004-08-25</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6cd142fd-8c7f-431e-bd33-5bff642574a1">
    <vCard:Given>Klaus</vCard:Given>
    <vCard:Family>Dietz</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#564a77c3-3e1e-41c8-b021-9fad20d0ade5">
    <vCard:N rdf:resource="rdf:#bd899796-eb64-4cce-b1a5-4afc84f89cd6"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f4101475-cf72-4217-bd8b-d753bb477f00">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#6cd142fd-8c7f-431e-bd33-5bff642574a1"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b76abc5e-9f0e-45c6-87d7-3b2a781cfd5a">
    <vCard:Given>Dieter</vCard:Given>
    <vCard:Family>Schenzle</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#59a7774e-ca74-419d-b9a0-ff8c32a5037c">
    <dcterms:W3CDTF>2007-06-15T10:45:47+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1a11e265-8beb-4d0d-955d-80f4eb765f27">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#255a1fb1-ed75-4ddc-927d-3d60cd80b9ba"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6f0f269b-8b1d-4427-be2c-d90d5c290b62">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#255a1fb1-ed75-4ddc-927d-3d60cd80b9ba">
    <vCard:Given>Nikolaos</vCard:Given>
    <vCard:Family>Stilianakis</vCard:Family>
    <vCard:Other>I</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#97849402-1859-4f1b-8d37-873283d449e1">
    <dc:subject rdf:resource="rdf:#f536d1b8-7a5b-43cc-8ef5-aa2fdb8d6ca9"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#40a4b63d-3a3d-41ac-b679-c1e616c5c086">
    <dc:creator rdf:resource="rdf:#fb51f8ad-3ee6-4e38-b08e-2b63b590f490"/>
    <dc:title>
            Analysis of a Model for the Pathogenesis of AIDS
          </dc:title>
    <bqs:volume>145</bqs:volume>
    <bqs:first_page>27</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#ce48dedd-556d-463a-a7c3-de40fccdacb2"/>
    <dcterms:issued rdf:resource="rdf:#8a3d5c64-4fe8-4b38-8e22-7026a911b34b"/>
    <bqs:last_page>46</bqs:last_page>
  </rdf:Description>
</rdf:RDF>
</model>
