<?xml version="1.0"?>

<model name="wein_1998" cmeta:id="wein_1998" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">

	<!-- documentation -->
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Mathematical analysis of antiretroviral therapy aimed at HIV-1 eradication or maintenance of low viral loads</title>
				<author>
					<firstname>Ethan</firstname>
					<surname>Choi</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>

			<section id="sec_status">
				<title>Model Status</title>
				<para>This CellML model has been built with the differential expressions (equations 1-10) in Wein et al.'s 1998 paper. This CellML runs in both OpenCell and COR and the units are consistent. Parameter values are taken from table 1 in the paper, and r1=0.9, p1=0.99, r2=p2=0.25 (as in figure 3). However the CellML model does not recreate the results published in figure 3.</para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>ABSTRACT: Motivated by the ability of combinations of antiretroviral agents to sustain viral suppression in HIV-1-infected individuals, we analyse the transient and steady-state behavior of a mathematical model of HIV-1 dynamics in vivo in order to predict whether these drug regimens can eradicate HIV-1 or maintain viral loads at low levels. The model incorporates two cell types (CD4+ T cells and a long-lived pool of cells), two strains of virus (drug-sensitive wild type and drug-resistant mutant) and two types of antiretroviral agents (reverse transcriptase and protease inhibitors). The transient behavior of the cells and virus and the eventual eradication of the virus are determined primarily by the strength of the combination therapy against the mutant strain and the maximum achievable increase in the uninfected CD4+ T cell concentration. We also predict, if the parameters of the model remain constant during therapy, that less intensive maintenance regimens will be unable to maintain low viral loads for extensive periods of time. However, if the reduction in viral load produced by therapy reduces the state of activation of the immune system, the number of cells susceptible for HIV-1 infection may decrease even though total CD4+ T cells increase. Our model predicts that if this occurs strong inductive therapy that reduces viral load followed by weaker maintenance regimes may succeed.</para>

				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>model diagram</title>
							</objectinfo>
							<imagedata fileref="wein_1998.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of the model.</caption>
				</informalfigure>

				<para>The original paper reference is cited below:</para>
				<para>Mathematical analysis of antiretroviral therapy aimed at HIV-1 eradication or maintenance of low viral loads, Wein L, D'Amato R, Perelson A, 1998, <emphasis>Journal of Theoretical Biology</emphasis>, 192, 81-98. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/9628841">PubMed ID: 9628841</ulink>
				</para>
			</sect1>
		</article>
	</documentation>


	<!-- units -->
	<units base_units="yes" name="virons"/>
	<units base_units="yes" name="cells"/>
	<units name="day">
		<unit multiplier="86400" units="second"/>
	</units>
	<units name="mm3">
		<unit exponent="3" prefix="milli" units="metre"/>
	</units>
	<units name="per_day">
		<unit exponent="-1" units="day"/>
	</units>
	<units name="ml">
		<unit prefix="milli" units="litre"/>
	</units>
	<units name="cells_per_mm3">
		<unit units="cells"/>
		<unit exponent="-1" units="mm3"/>
	</units>
	<units name="virons_per_ml">
		<unit units="virons"/>
		<unit exponent="-1" units="ml"/>
	</units>
	<units name="virons_per_cell">
		<unit units="virons"/>
		<unit exponent="-1" units="cells"/>
	</units>
	<units name="ml_per_virons_day">
		<unit units="ml"/>
		<unit exponent="-1" units="virons"/>
		<unit exponent="-1" units="day"/>
	</units>
	<units name="cells_per_mm3_day">
		<unit units="cells"/>
		<unit exponent="-1" units="mm3"/>
		<unit exponent="-1" units="day"/>
	</units>

	<!-- components -->
	<component name="environment">
		<variable name="time" public_interface="out" units="day"/>
	</component>

	<component name="uninfected_CD4">
		<variable name="time" public_interface="in" units="day"/>
		<variable initial_value="178.81" name="T" public_interface="out" units="cells_per_mm3"/>
		<variable initial_value="0" name="s" units="cells_per_mm3_day"/>
		<variable initial_value="0.01" name="lambda" units="per_day"/>
		<variable name="T1_star" public_interface="in" units="cells_per_mm3"/>
		<variable name="T2_star" public_interface="in" units="cells_per_mm3"/>
		<variable initial_value="450" name="Tmax" units="cells_per_mm3"/>
		<variable initial_value="0.0014" name="mu" units="per_day"/>
		<variable name="k1" public_interface="in" units="ml_per_virons_day"/>
		<variable name="r1" public_interface="in" units="dimensionless"/>
		<variable name="V1_I" public_interface="in" units="virons_per_ml"/>
		<variable name="k2" public_interface="in" units="ml_per_virons_day"/>
		<variable name="r2" public_interface="in" units="dimensionless"/>
		<variable name="V2_I" public_interface="in" units="virons_per_ml"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time</ci>
					</bvar>
					<ci>T</ci>
				</apply>
				<apply>
					<minus/>
					<apply>
						<minus/>
						<apply>
							<minus/>
							<apply>
								<plus/>
								<ci>s</ci>
								<apply>
									<times/>
									<ci>lambda</ci>
									<ci>T</ci>
									<apply>
										<minus/>
										<cn cellml:units="dimensionless">1</cn>
										<apply>
											<divide/>
											<apply>
												<plus/>
												<ci>T</ci>
												<ci>T1_star</ci>
												<ci>T2_star</ci>
											</apply>
											<ci>Tmax</ci>
										</apply>
									</apply>
								</apply>
							</apply>
							<apply>
								<times/>
								<ci>mu</ci>
								<ci>T</ci>
							</apply>
						</apply>
						<apply>
							<times/>
							<ci>k1</ci>
							<apply>
								<minus/>
								<cn cellml:units="dimensionless">1</cn>
								<ci>r1</ci>
							</apply>
							<ci>T</ci>
							<ci>V1_I</ci>
						</apply>
					</apply>
					<apply>
						<times/>
						<ci>k2</ci>
						<apply>
							<minus/>
							<cn cellml:units="dimensionless">1</cn>
							<ci>r2</ci>
						</apply>
						<ci>T</ci>
						<ci>V2_I</ci>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="uninfected_long_lived_cells">
		<variable name="time" public_interface="in" units="day"/>
		<variable initial_value="49.2" name="M" public_interface="out" units="cells_per_mm3"/>
		<variable initial_value="2.0" name="lambda_M" units="cells_per_mm3_day"/>
		<variable initial_value="0.04" name="mu_M" units="per_day"/>
		<variable name="k1_M" public_interface="in" units="ml_per_virons_day"/>
		<variable name="r1" public_interface="in" units="dimensionless"/>
		<variable name="V1_I" public_interface="in" units="virons_per_ml"/>
		<variable name="k2_M" public_interface="in" units="ml_per_virons_day"/>
		<variable name="r2" public_interface="in" units="dimensionless"/>
		<variable name="V2_I" public_interface="in" units="virons_per_ml"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time </ci>
					</bvar>
					<ci>M </ci>
				</apply>
				<apply>
					<minus/>
					<apply>
						<minus/>
						<apply>
							<minus/>
							<ci>lambda_M </ci>
							<apply>
								<times/>
								<ci>mu_M </ci>
								<ci>M </ci>
							</apply>
						</apply>
						<apply>
							<times/>
							<ci>k1_M </ci>
							<apply>
								<minus/>
								<cn cellml:units="dimensionless">1 </cn>
								<ci>r1 </ci>
							</apply>
							<ci>M </ci>
							<ci>V1_I </ci>
						</apply>
					</apply>
					<apply>
						<times/>
						<ci>k2_M </ci>
						<apply>
							<minus/>
							<cn cellml:units="dimensionless">1 </cn>
							<ci>r2 </ci>
						</apply>
						<ci>M </ci>
						<ci>V2_I </ci>
					</apply>
				</apply>
			</apply>
		</math>
	</component>
	<component name="productively_infected_CD4">
		<variable name="time" public_interface="in" units="day"/>
		<variable initial_value="1.19" name="T1_star" public_interface="out" units="cells_per_mm3"/>
		<variable initial_value="1" name="m11" public_interface="out" units="dimensionless"/>
		<variable initial_value="3.43E-8" name="k1" public_interface="out" units="ml_per_virons_day"/>
		<variable name="r1" public_interface="in" units="dimensionless"/>
		<variable name="T" public_interface="in" units="cells_per_mm3"/>
		<variable name="V1_I" public_interface="in" units="virons_per_ml"/>
		<variable initial_value="3.4E-5" name="m21" public_interface="out" units="dimensionless"/>
		<variable initial_value="3.43E-8" name="k2" public_interface="out" units="ml_per_virons_day"/>
		<variable name="r2" public_interface="in" units="dimensionless"/>
		<variable name="V2_I" public_interface="in" units="virons_per_ml"/>
		<variable initial_value="0.69" name="delta1" public_interface="out" units="per_day"/>
		<variable initial_value="0.004" name="T2_star" public_interface="out" units="cells_per_mm3"/>
		<variable initial_value="1" name="m22" public_interface="out" units="dimensionless"/>
		<variable initial_value="3.4E-5" name="m12" public_interface="out" units="dimensionless"/>
		<variable initial_value="0.69" name="delta2" public_interface="out" units="per_day"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time </ci>
					</bvar>
					<ci>T1_star </ci>
				</apply>
				<apply>
					<minus/>
					<apply>
						<plus/>
						<apply>
							<times/>
							<ci>m11 </ci>
							<ci>k1 </ci>
							<apply>
								<minus/>
								<cn cellml:units="dimensionless">1 </cn>
								<ci>r1 </ci>
							</apply>
							<ci>T </ci>
							<ci>V1_I </ci>
						</apply>
						<apply>
							<times/>
							<ci>m21 </ci>
							<ci>k2 </ci>
							<apply>
								<minus/>
								<cn cellml:units="dimensionless">1 </cn>
								<ci>r2 </ci>
							</apply>
							<ci>T </ci>
							<ci>V2_I </ci>
						</apply>
					</apply>
					<apply>
						<times/>
						<ci>delta1 </ci>
						<ci>T1_star </ci>
					</apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time</ci>
					</bvar>
					<ci>T2_star</ci>
				</apply>
				<apply>
					<minus/>
					<apply>
						<plus/>
						<apply>
							<times/>
							<ci>m22</ci>
							<ci>k2</ci>
							<apply>
								<minus/>
								<cn cellml:units="dimensionless">1</cn>
								<ci>r2</ci>
							</apply>
							<ci>T</ci>
							<ci>V2_I</ci>
						</apply>
						<apply>
							<times/>
							<ci>m12</ci>
							<ci>k1</ci>
							<apply>
								<minus/>
								<cn cellml:units="dimensionless">1</cn>
								<ci>r1</ci>
							</apply>
							<ci>T</ci>
							<ci>V1_I</ci>
						</apply>
					</apply>
					<apply>
						<times/>
						<ci>delta2</ci>
						<ci>T2_star</ci>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="productively_infected_long_lived_cells">
		<variable name="time" public_interface="in" units="day"/>
		<variable initial_value="0.49" name="M1_star" public_interface="out" units="cells_per_mm3"/>
		<variable name="m11" public_interface="in" units="dimensionless"/>
		<variable initial_value="4.67E-9" name="k1_M" public_interface="out" units="ml_per_virons_day"/>
		<variable name="r1" public_interface="in" units="dimensionless"/>
		<variable name="M" public_interface="in" units="cells_per_mm3"/>
		<variable name="V1_I" public_interface="in" units="virons_per_ml"/>
		<variable name="m21" public_interface="in" units="dimensionless"/>
		<variable initial_value="4.67E-9" name="k2_M" public_interface="out" units="ml_per_virons_day"/>
		<variable name="r2" public_interface="in" units="dimensionless"/>
		<variable name="V2_I" public_interface="in" units="virons_per_ml"/>
		<variable initial_value="0.062" name="delta1_M" public_interface="out" units="per_day"/>
		<variable initial_value="1.7E-3" name="M2_star" public_interface="out" units="cells_per_mm3"/>
		<variable name="m22" public_interface="in" units="dimensionless"/>
		<variable name="m12" public_interface="in" units="dimensionless"/>
		<variable initial_value="0.062" name="delta2_M" public_interface="out" units="per_day"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time </ci>
					</bvar>
					<ci>M1_star </ci>
				</apply>
				<apply>
					<minus/>
					<apply>
						<plus/>
						<apply>
							<times/>
							<ci>m11 </ci>
							<ci>k1_M </ci>
							<apply>
								<minus/>
								<cn cellml:units="dimensionless">1 </cn>
								<ci>r1 </ci>
							</apply>
							<ci>M </ci>
							<ci>V1_I </ci>
						</apply>
						<apply>
							<times/>
							<ci>m21 </ci>
							<ci>k2_M </ci>
							<apply>
								<minus/>
								<cn cellml:units="dimensionless">1 </cn>
								<ci>r2 </ci>
							</apply>
							<ci>M </ci>
							<ci>V2_I </ci>
						</apply>
					</apply>
					<apply>
						<times/>
						<ci>delta1_M </ci>
						<ci>M1_star </ci>
					</apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time </ci>
					</bvar>
					<ci>M2_star </ci>
				</apply>
				<apply>
					<minus/>
					<apply>
						<plus/>
						<apply>
							<times/>
							<ci>m22 </ci>
							<ci>k2_M </ci>
							<apply>
								<minus/>
								<cn cellml:units="dimensionless">1 </cn>
								<ci>r2 </ci>
							</apply>
							<ci>M </ci>
							<ci>V2_I </ci>
						</apply>
						<apply>
							<times/>
							<ci>m12 </ci>
							<ci>k1_M </ci>
							<apply>
								<minus/>
								<cn cellml:units="dimensionless">1 </cn>
								<ci>r1 </ci>
							</apply>
							<ci>M </ci>
							<ci>V1_I </ci>
						</apply>
					</apply>
					<apply>
						<times/>
						<ci>delta2_M </ci>
						<ci>M2_star </ci>
					</apply>
				</apply>
			</apply>
		</math>
	</component>
	<component name="virus_strain1">
		<variable name="time" public_interface="in" units="day"/>
		<variable initial_value="133500" name="V1_I" public_interface="out" units="virons_per_ml"/>
		<variable name="p1" public_interface="in" units="dimensionless"/>
		<variable initial_value="480.1" name="N1" units="virons_per_cell"/>
		<variable name="delta1" public_interface="in" units="per_day"/>
		<variable name="T1_star" public_interface="in" units="cells_per_mm3"/>
		<variable initial_value="534.4" name="N1_M" units="virons_per_cell"/>
		<variable name="delta1_M" public_interface="in" units="per_day"/>
		<variable name="M1_star" public_interface="in" units="cells_per_mm3"/>
		<variable initial_value="133500" name="V1" units="virons_per_ml"/>
		<variable initial_value="3.07" name="c1" units="per_day"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time </ci>
					</bvar>
					<ci>V1_I </ci>
				</apply>
				<apply>
					<minus/>
					<apply>
					    <plus/>
					    <apply>
						    <times/>
						    <apply>
							    <minus/>
							    <cn cellml:units="dimensionless">1 </cn>
							    <ci>p1 </ci>
						    </apply>
						    <ci>N1 </ci>
						    <ci>delta1 </ci>
						    <ci>T1_star </ci>
					    </apply>
					    <apply>
						    <times/>
						    <apply>
							    <minus/>
							    <cn cellml:units="dimensionless">1 </cn>
							    <ci>p1 </ci>
						    </apply>
						    <ci>N1_M </ci>
						    <ci>delta1_M </ci>
						    <ci>M1_star </ci>
					    </apply>
				    </apply>
					<apply>
						<times/>
						<ci>c1 </ci>
						<ci>V1_I </ci>
					</apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time </ci>
					</bvar>
					<ci>V1 </ci>
				</apply>
				<apply>
					<minus/>
					<apply>
						<plus/>
						<apply>
							<times/>
							<ci>N1 </ci>
							<ci>delta1 </ci>
							<ci>T1_star </ci>
						</apply>
						<apply>
							<times/>
							<ci>N1_M </ci>
							<ci>delta1_M </ci>
							<ci>M1_star </ci>
						</apply>
					</apply>
					<apply>
						<times/>
						<ci>c1 </ci>
						<ci>V1 </ci>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="virus_strain2">
		<variable name="time" public_interface="in" units="day"/>
		<variable initial_value="450" name="V2_I" public_interface="out" units="virons_per_ml"/>
		<variable name="p2" public_interface="in" units="dimensionless"/>
		<variable initial_value="475.3" name="N2" units="virons_per_cell"/>
		<variable name="delta2" public_interface="in" units="per_day"/>
		<variable name="T2_star" public_interface="in" units="cells_per_mm3"/>
		<variable initial_value="529.0" name="N2_M" units="virons_per_cell"/>
		<variable name="delta2_M" public_interface="in" units="per_day"/>
		<variable name="M2_star" public_interface="in" units="cells_per_mm3"/>
		<variable initial_value="3.07" name="c2" units="per_day"/>
		<variable initial_value="450" name="V2" units="virons_per_ml"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time </ci>
					</bvar>
					<ci>V2_I </ci>
				</apply>
				<apply>
					<minus/>
					<apply>
						<plus/>
						<apply>
							<times/>
							<apply>
								<minus/>
								<cn cellml:units="dimensionless">1 </cn>
								<ci>p2 </ci>
							</apply>
							<ci>N2 </ci>
							<ci>delta2 </ci>
							<ci>T2_star </ci>
						</apply>
						<apply>
							<times/>
							<apply>
								<minus/>
								<cn cellml:units="dimensionless">1 </cn>
								<ci>p2 </ci>
							</apply>
							<ci>N2_M </ci>
							<ci>delta2_M </ci>
							<ci>M2_star </ci>
						</apply>
					</apply>
					<apply>
						<times/>
						<ci>c2 </ci>
						<ci>V2_I </ci>
					</apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time </ci>
					</bvar>
					<ci>V2 </ci>
				</apply>
				<apply>
					<minus/>
					<apply>
						<plus/>
						<apply>
							<times/>
							<ci>N2 </ci>
							<ci>delta2 </ci>
							<ci>T2_star </ci>
						</apply>
						<apply>
							<times/>
							<ci>N2_M </ci>
							<ci>delta2_M </ci>
							<ci>M2_star </ci>
						</apply>
					</apply>
					<apply>
						<times/>
						<ci>c2 </ci>
						<ci>V2 </ci>
					</apply>
				</apply>
			</apply>
		</math>
	</component>


	<!-- connections -->
	<connection>
		<map_components component_1="environment" component_2="uninfected_CD4"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection>
		<map_components component_1="environment" component_2="uninfected_long_lived_cells"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection>
		<map_components component_1="environment" component_2="productively_infected_CD4"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection>
		<map_components component_1="environment" component_2="productively_infected_long_lived_cells"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection>
		<map_components component_1="environment" component_2="virus_strain1"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection>
		<map_components component_1="environment" component_2="virus_strain2"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection>
		<map_components component_1="uninfected_CD4" component_2="productively_infected_CD4"/>
		<map_variables variable_1="T" variable_2="T"/>
		<map_variables variable_1="T1_star" variable_2="T1_star"/>
		<map_variables variable_1="T2_star" variable_2="T2_star"/>
		<map_variables variable_1="k1" variable_2="k1"/>
		<map_variables variable_1="k2" variable_2="k2"/>
	</connection>
	<connection>
		<map_components component_1="productively_infected_CD4" component_2="virus_strain1"/>
		<map_variables variable_1="T1_star" variable_2="T1_star"/>
		<map_variables variable_1="V1_I" variable_2="V1_I"/>
		<map_variables variable_1="delta1" variable_2="delta1"/>
	</connection>
	<connection>
		<map_components component_1="productively_infected_CD4" component_2="virus_strain2"/>
		<map_variables variable_1="T2_star" variable_2="T2_star"/>
		<map_variables variable_1="V2_I" variable_2="V2_I"/>
		<map_variables variable_1="delta2" variable_2="delta2"/>
	</connection>
	<component name="drug_parameters">
		<variable initial_value="0.9" name="r1" public_interface="out" units="dimensionless"/>
		<variable initial_value="0.25" name="r2" public_interface="out" units="dimensionless"/>
		<variable initial_value="0.99" name="p1" public_interface="out" units="dimensionless"/>
		<variable initial_value="0.25" name="p2" public_interface="out" units="dimensionless"/>
	</component>
	<connection>
		<map_components component_1="uninfected_CD4" component_2="drug_parameters"/>
		<map_variables variable_1="r1" variable_2="r1"/>
		<map_variables variable_1="r2" variable_2="r2"/>
	</connection>
	<connection>
		<map_components component_1="uninfected_long_lived_cells" component_2="drug_parameters"/>
		<map_variables variable_1="r1" variable_2="r1"/>
		<map_variables variable_1="r2" variable_2="r2"/>
	</connection>
	<connection>
		<map_components component_1="productively_infected_CD4" component_2="drug_parameters"/>
		<map_variables variable_1="r1" variable_2="r1"/>
		<map_variables variable_1="r2" variable_2="r2"/>
	</connection>
	<connection>
		<map_components component_1="productively_infected_long_lived_cells" component_2="drug_parameters"/>
		<map_variables variable_1="r1" variable_2="r1"/>
		<map_variables variable_1="r2" variable_2="r2"/>
	</connection>
	<connection>
		<map_components component_1="uninfected_CD4" component_2="virus_strain1"/>
		<map_variables variable_1="V1_I" variable_2="V1_I"/>
	</connection>
	<connection>
		<map_components component_1="uninfected_long_lived_cells" component_2="virus_strain1"/>
		<map_variables variable_1="V1_I" variable_2="V1_I"/>
	</connection>
	<connection>
		<map_components component_1="productively_infected_long_lived_cells" component_2="virus_strain1"/>
		<map_variables variable_1="V1_I" variable_2="V1_I"/>
		<map_variables variable_1="M1_star" variable_2="M1_star"/>
		<map_variables variable_1="delta1_M" variable_2="delta1_M"/>
	</connection>
	<connection>
		<map_components component_1="uninfected_long_lived_cells" component_2="productively_infected_long_lived_cells"/>
		<map_variables variable_1="M" variable_2="M"/>
		<map_variables variable_1="k1_M" variable_2="k1_M"/>
		<map_variables variable_1="k2_M" variable_2="k2_M"/>
	</connection>
	<connection>
		<map_components component_1="uninfected_long_lived_cells" component_2="virus_strain2"/>
		<map_variables variable_1="V2_I" variable_2="V2_I"/>
	</connection>
	<connection>
		<map_components component_1="productively_infected_long_lived_cells" component_2="virus_strain2"/>
		<map_variables variable_1="V2_I" variable_2="V2_I"/>
		<map_variables variable_1="M2_star" variable_2="M2_star"/>
		<map_variables variable_1="delta2_M" variable_2="delta2_M"/>
	</connection>
	<connection>
		<map_components component_1="productively_infected_CD4" component_2="productively_infected_long_lived_cells"/>
		<map_variables variable_1="m11" variable_2="m11"/>
		<map_variables variable_1="m21" variable_2="m21"/>
		<map_variables variable_1="m22" variable_2="m22"/>
		<map_variables variable_1="m12" variable_2="m12"/>
	</connection>
	<connection>
		<map_components component_1="uninfected_CD4" component_2="virus_strain2"/>
		<map_variables variable_1="V2_I" variable_2="V2_I"/>
	</connection>
	<connection>
		<map_components component_1="virus_strain1" component_2="drug_parameters"/>
		<map_variables variable_1="p1" variable_2="p1"/>
	</connection>
	<connection>
		<map_components component_1="virus_strain2" component_2="drug_parameters"/>
		<map_variables variable_1="p2" variable_2="p2"/>
	</connection>

	<!-- metadata -->
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
		<rdf:Description rdf:about="">
			<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
				<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
					<vCard:Family>Choi</vCard:Family>
					<vCard:Given>Ethan</vCard:Given>
				</vCard:N>
				<vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
					<rdf:value>mcho099@aucklanduni.ac.nz</rdf:value>
					<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
				</vCard:EMAIL>
				<vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
					<vCard:Orgname>The University of Auckland</vCard:Orgname>
					<vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
				</vCard:ORG>
			</dc:creator>
			<dcterms:created xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
				<dcterms:W3CDTF>2010-02-19</dcterms:W3CDTF>
			</dcterms:created>
		</rdf:Description>
		<rdf:Description rdf:about="#wein_1998">
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Mathematical analysis of antiretroviral therapy aimed at HIV-1 eradication or maintenance of low viral loads</dc:title>
			<cmeta:comment rdf:parseType="Resource">
				<rdf:value>This is the CellML description of Wein's 1993 mathematical model for the mathematical analysis of antiretroviral therapy aimed at HIV-1</rdf:value>
				<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
					<vCard:FN xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Ethan Choi</vCard:FN>
				</dc:creator>
			</cmeta:comment>
			<!-- Keywords -->
			<bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource">
				<dc:subject xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
					<bqs:subject_type>Keywords</bqs:subject_type>
					<rdf:value>
						<rdf:Bag>
							<rdf:li>Immunology</rdf:li>
							<rdf:li>CD4 T cell</rdf:li>
							<rdf:li>HIV-1</rdf:li>
							<rdf:li>dynamics</rdf:li>
							<rdf:li>long-lived cells</rdf:li>
						</rdf:Bag>
					</rdf:value>
				</dc:subject>
			</bqs:reference>
			<bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource">
				<bqs:Pubmed_id>9628841</bqs:Pubmed_id>
				<bqs:JournalArticle rdf:parseType="Resource">
					<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/">
						<rdf:Seq>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Wein</vCard:Family>
										<vCard:Given>Lawrence</vCard:Given>
										<vCard:Other>M</vCard:Other>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>D'Amato</vCard:Family>
										<vCard:Given>Rebecca</vCard:Given>
										<vCard:Other>M</vCard:Other>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Perelson</vCard:Family>
										<vCard:Given>Alan</vCard:Given>
										<vCard:Other>S</vCard:Other>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
						</rdf:Seq>
					</dc:creator>
					<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Mathematical analysis of antiretroviral therapy aimed at HIV-1 eradication or maintenance of low viral loads</dc:title>
					<dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
						<dcterms:W3CDTF>1998-05</dcterms:W3CDTF>
					</dcterms:issued>
					<bqs:Journal rdf:parseType="Resource">
						<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Journal of Theoretical Biology</dc:title>
					</bqs:Journal>
					<bqs:volume>192</bqs:volume>
					<bqs:first_page>81</bqs:first_page>
					<bqs:last_page>98</bqs:last_page>
				</bqs:JournalArticle>
			</bqs:reference>
		</rdf:Description>
	</rdf:RDF>


	<!-- OpenCell metadata -->
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
		<rdf:Description rdf:nodeID="n1">
			<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
				<rdf:Description rdf:nodeID="n2"/>
			</boundIntervals>
		</rdf:Description>
		<rdf:Description rdf:nodeID="n2">
			<rdf:first>
				<rdf:Description rdf:nodeID="n3"/>
			</rdf:first>
			<rdf:rest>
				<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
			</rdf:rest>
		</rdf:Description>
		<rdf:Description rdf:nodeID="n3">
			<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">900</endingValue>
			<pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">100000</pointDensity>
		</rdf:Description>
		<rdf:Description rdf:about="#wein_1998">
			<simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
				<rdf:Description rdf:nodeID="n1"/>
			</simulation>
		</rdf:Description>
	</rdf:RDF>

</model>