<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  FiberDispersion_law_1248.xml

CREATED :  1st January 2007

LAST MODIFIED : 1st February 2007

AUTHOR :  Holger Schmid
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.

The model represented here focuses on the combination 1,2,4,8 of the fibre dispersion law. 
With '1' and '2' representing the isotropic components of the functional form and 
'4'  and '8' representing the anisotropic components of the functional form.

DESCRIPTION :  This file contains a CellML description of the Guccione constitutive material law, defining the relation between the six independent strain components and the stress components.

CHANGES:
18/02/04 - CML - Completed the Metadata.  
  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="FiberDisperion" name="ogden_gasser_holzapfel_2005_version02">
    
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Fibre Dispersion Law</title>
  <author> 
    <firstname>Holger</firstname>
          <surname>Schmid</surname>

    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
   This CellML model was implemented in a manner that could be used for peforming finite element model simulations on the CMISS software program developed at the Bioengineering Institute, University of Auckland. The model file presented here focuses on the functional form of the fibre dispersion law corresponding to the the combination 1,2,4,8 <emphasis>(FiberDispersion_law_1248)</emphasis>, with 1 and 2 representing the isotropic components of the functional form, and 4 and 8 representing the anisotropic components of the fucntional form. For additional information on implementation of cellML files in CMISS, please refer to the following <ulink url="http://www.bioeng.auckland.ac.nz/people/nickerso/cmiss/help.html">Link</ulink>.   
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>    
<para>
Constitutive relations are fundamental to the solution of problems in continuum mechanics, and are required in the study of, for example, mechanically dominated clinical interventions involving soft biological tissues. Structural continuum constitutive models of arterial layers integrate information about the tissue morphology and therefore allow investigation of the interrelation between structure and function in response to mechanical loading. Collagen fibres are key ingredients in the structure of arteries. In the media (the middle layer of the artery wall) they are arranged in two helically distributed families with a small pitch and very little dispersion in their orientation (i.e. they are aligned quite close to the circumferential direction). By contrast, in the adventitial and intimal layers, the orientation of the collagen fibres is dispersed, as shown by polarized light microscopy of stained arterial tissue. As a result, continuum models that do not account for the dispersion are not able to capture accurately the stress-strain response of these layers. The purpose of this paper, therefore, is to develop a structural continuum framework that is able to represent the dispersion of the collagen fibre orientation. This then allows the development of a new hyperelastic free-energy function that is particularly suited for representing the anisotropic elastic properties of adventitial and intimal layers of arterial walls, and is a generalization of the fibre-reinforced structural model introduced by Holzapfel and Gasser (Holzapfel and Gasser 2001 Comput. Meth. Appl. Mech. Eng. 190, 4379-4403) and Holzapfel et al. (Holzapfel et al. 2000 J. Elast. 61, 1-48). The model incorporates an additional scalar structure parameter that characterizes the dispersed collagen orientation. An efficient finite element implementation of the model is then presented and numerical examples show that the dispersion of the orientation of collagen fibres in the adventitia of human iliac arteries has a significant effect on their mechanical response.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Hyperelastic modelling of arterial layers with distributed collagen fibre orientations, T.C. Gasser, R.W. Ogden and G.A. Holzapfel, 2006,  <emphasis>Journal of the Royal Society</emphasis>, 3(6), 15-35.  <ulink url="http://www.ncbi.nlm.nih.gov/sites/entrez?cmd=Retrieve&amp;db=PubMed&amp;dopt=AbstractPlus&amp;list_uids=16849214">PubMed ID: 16849214</ulink>  </para>	 
</sect1>
</article>
</documentation>    

  <!-- Global units -->
  <units name="strain">
    <unit units="dimensionless"/>
  </units>
  <units name="stress">
    <unit units="dimensionless"/>
  </units>

  <component cmeta:id="interface" name="interface">

    
  
    <!-- Variables we expect to be set/controlled externally -->
    <variable units="strain" private_interface="out" name="Emm"/>
    <variable units="strain" private_interface="out" name="Emn"/>
    <variable units="strain" private_interface="out" name="Ems"/>
    <variable units="strain" private_interface="out" name="Enn"/>
    <variable units="strain" private_interface="out" name="Ens"/>
    <variable units="strain" private_interface="out" name="Ess"/>
    <variable units="strain" private_interface="out" name="c11" initial_value="0"/>
    <variable units="strain" private_interface="out" name="c12" initial_value="0"/>
    <variable units="strain" private_interface="out" name="c21" initial_value="0"/>
    <variable units="strain" private_interface="out" name="c22" initial_value="0"/>
    <variable units="strain" private_interface="out" name="c41" initial_value="0"/>
    <variable units="strain" private_interface="out" name="c42" initial_value="0"/>
    <variable units="strain" private_interface="out" name="c81" initial_value="0"/>
    <variable units="strain" private_interface="out" name="c82" initial_value="0"/>
    <variable units="strain" private_interface="out" name="kappa1" initial_value="0"/>
    <variable units="strain" private_interface="out" name="kappa2" initial_value="0"/>

     
    <!-- Variables we want to make available externally -->
    <variable units="stress" public_interface="out" private_interface="in" name="Tdevmm"/>
    <variable units="stress" public_interface="out" private_interface="in" name="Tdevmn"/>
    <variable units="stress" public_interface="out" private_interface="in" name="Tdevms"/>
    <variable units="stress" public_interface="out" private_interface="in" name="Tdevnn"/>
    <variable units="stress" public_interface="out" private_interface="in" name="Tdevns"/>
    <variable units="stress" public_interface="out" private_interface="in" name="Tdevss"/>
    
    </component> <!--interface-->

  <component cmeta:id="equations" name="equations">

    

    <!-- Inputs -->
    <variable units="strain" public_interface="in" name="Emm"/>
    <variable units="strain" public_interface="in" name="Enn"/>
    <variable units="strain" public_interface="in" name="Ess"/>
    <variable units="strain" public_interface="in" name="Emn"/>
    <variable units="strain" public_interface="in" name="Ems"/>
    <variable units="strain" public_interface="in" name="Ens"/>
    <variable units="strain" public_interface="in" name="c11"/>
    <variable units="strain" public_interface="in" name="c12"/>
    <variable units="strain" public_interface="in" name="c21"/>
    <variable units="strain" public_interface="in" name="c22"/>
    <variable units="strain" public_interface="in" name="c41"/>
    <variable units="strain" public_interface="in" name="c42"/>
    <variable units="strain" public_interface="in" name="c81"/>
    <variable units="strain" public_interface="in" name="c82"/>
    <variable units="strain" public_interface="in" name="kappa1"/>
    <variable units="strain" public_interface="in" name="kappa2"/>


     
    <!-- Outputs computed here -->
    <variable units="stress" public_interface="out" name="Tdevmm"/>
    <variable units="stress" public_interface="out" name="Tdevnn"/>
    <variable units="stress" public_interface="out" name="Tdevss"/>
    <variable units="stress" public_interface="out" name="Tdevmn"/>
    <variable units="stress" public_interface="out" name="Tdevms"/>
    <variable units="stress" public_interface="out" name="Tdevns"/>

    <!-- Temporary variables -->
    <variable units="strain" public_interface="none" private_interface="none" name="I1"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="I1_calculation_eq">
      <apply id="I1_calculation">
        <eq/>
        <ci>I1</ci>
        <apply>
          <plus/>
          <cn cellml:units="strain">3</cn>
          <apply>
            <times/> 
            <cn cellml:units="strain">2</cn> 
            <ci>Emm</ci>
          </apply>
          <apply>
            <times/> 
            <cn cellml:units="strain">2</cn> 
            <ci>Enn</ci>
          </apply>
          <apply>
            <times/> 
            <cn cellml:units="strain">2</cn> 
            <ci>Ess</ci>
          </apply>
        </apply>
      </apply>
    </math>


    <variable units="strain" public_interface="none" private_interface="none" name="I2"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="I2_calculation_eq">
      <apply id="I2_calculation">
        <eq/>
        <ci>I2</ci>
        <apply>
          <plus/>
          <cn cellml:units="strain">3</cn>
          <apply>
            <times/> 
            <cn cellml:units="strain">-4</cn> 
            <ci>Emn</ci>
            <ci>Emn</ci>
          </apply>
          <apply>
            <times/> 
            <cn cellml:units="strain">4</cn> 
            <ci>Enn</ci>
          </apply>
          <apply>
            <times/> 
            <cn cellml:units="strain">-4</cn> 
            <ci>Ems</ci>
            <ci>Ems</ci>
          </apply>
          <apply>
            <times/> 
            <cn cellml:units="strain">-4</cn> 
            <ci>Ens</ci>
            <ci>Ens</ci>
          </apply>
          <apply>
            <times/> 
            <cn cellml:units="strain">4</cn> 
            <apply>
              <plus/>
              <cn cellml:units="strain">1</cn> 
              <ci>Enn</ci>
            </apply>
            <ci>Ess</ci>
          </apply>
          <apply>
            <times/>
            <cn cellml:units="strain">4</cn> 
            <apply>
              <plus/>
              <cn cellml:units="strain">1</cn> 
              <ci>Enn</ci>
            </apply>
            <ci>Ess</ci>
          </apply>
          <apply>
            <times/>
            <cn cellml:units="strain">4</cn> 
            <apply>
              <plus/>
              <cn cellml:units="strain">1</cn> 
              <ci>Enn</ci>
              <ci>Ess</ci>
            </apply>
            <ci>Emm</ci>
          </apply>
        </apply>
      </apply>
    </math>


    <variable units="strain" public_interface="none" private_interface="none" name="I4"/>
	
       
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="I4_calculation_eq">
      <apply id="I4_calculation">
        <eq/>
        <ci>I4</ci>
        <apply>
          <plus/>
          <cn cellml:units="strain">1</cn>
          <apply>
            <times/> 
            <cn cellml:units="strain">2</cn> 
            <ci>Emm</ci>
          </apply>
        </apply>
      </apply>
    </math>




    <variable units="strain" public_interface="none" private_interface="none" name="I6"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="I6_calculation_eq">
      <apply id="I6_calculation">
        <eq/>
        <ci>I6</ci>
        <apply>
          <plus/>
          <cn cellml:units="strain">1</cn>
          <apply>
            <times/> 
            <cn cellml:units="strain">2</cn> 
            <ci>Enn</ci>
          </apply>
        </apply>
      </apply>
    </math>



    <variable units="strain" public_interface="none" private_interface="none" name="I8"/>
	   

    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="I8_calculation_eq">
      <apply id="I8_calculation">
        <eq/>
        <ci>I8</ci>
        <apply>
          <plus/>
          <cn cellml:units="strain">1</cn>
          <apply>
            <times/> 
            <cn cellml:units="strain">2</cn> 
            <ci>Ess</ci>
          </apply>
        </apply>
      </apply>
    </math>

    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdevmm_calculation_eq">
      <apply id="Tdevmm_calculation">
        <eq/>
        <ci>Tdevmm</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <cn cellml:units="strain">2</cn>
            <ci>c11</ci>
            <apply>
              <exp/>
               <apply>
                <times/>
                 <ci>c12</ci>
                 <apply>
                  <power/>
                   <apply>
                    <minus/>
                     <ci>I1</ci>
                     <cn cellml:units="strain">3</cn>
                   </apply>
                   <cn cellml:units="strain">2</cn> 
                 </apply>
               </apply>
            </apply>
            <apply>
              <minus/>
              <ci>I1</ci>
              <cn cellml:units="strain">3</cn>
            </apply>
          </apply>
          <apply>
            <times/>
            <cn cellml:units="strain">4</cn>
            <ci>c21</ci>
            <apply>
              <exp/>
               <apply>
                <times/>
                 <ci>c22</ci>
                 <apply>
                  <power/>
                   <apply>
                    <minus/>
                     <ci>I2</ci>
                     <cn cellml:units="strain">3</cn>
                   </apply>
                   <cn cellml:units="strain">2</cn> 
                 </apply>
               </apply>
            </apply>
            <apply>
              <minus/>
              <ci>I2</ci>
              <cn cellml:units="strain">3</cn>
            </apply>
            <apply>
              <plus/>
              <cn cellml:units="strain">1</cn>
              <ci>Enn</ci>
              <ci>Ess</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <cn cellml:units="strain">2</cn>
            <ci>c41</ci>
            <apply>
              <exp/>
               <apply>
                <times/>
                 <ci>c42</ci>
                 <apply>
                  <power/>
                   <apply>
                    <minus/>
                     <apply>
                      <times/>
                       <ci>I4</ci>
                       <apply>
                        <minus/>
                         <cn cellml:units="strain">1</cn>
                         <apply>
                          <times/>
                           <cn cellml:units="strain">3</cn>
                           <ci>kappa1</ci>
                         </apply>
                       </apply>
                     </apply>
                     <cn cellml:units="strain">1</cn>
                   </apply>
                   <cn cellml:units="strain">2</cn>
                 </apply>
               </apply>
             </apply>
             <apply>
              <minus/>
               <apply>
                <times/>
                 <ci>I4</ci>
                 <apply>
                  <minus/>
                    <cn cellml:units="strain">1</cn>
                    <apply>
                    <times/>
                      <cn cellml:units="strain">3</cn>
                      <ci>kappa1</ci>
                    </apply>
                  </apply>
                </apply>
                <cn cellml:units="strain">1</cn>
             </apply>
             <apply>
              <minus/>
               <cn cellml:units="strain">1</cn>
               <apply>
                <times/>
                 <cn cellml:units="strain">3</cn>
                 <ci>kappa1</ci>
               </apply>
             </apply>
          </apply>
        </apply>
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdevmn_calculation_eq">
      <apply id="Tdevmn_calculation">
        <eq/>
        <ci>Tdevmn</ci>
        <apply>
          <times/>
          <cn cellml:units="strain">-4</cn>
          <ci>c21</ci>
          <apply>
            <exp/>
             <apply>
              <times/>
               <ci>c22</ci>
               <apply>
                <power/>
                 <apply>
                  <minus/>
                   <ci>I2</ci>
                   <cn cellml:units="strain">3</cn>
                 </apply>
                 <cn cellml:units="strain">2</cn> 
               </apply>
             </apply>
          </apply>
          <apply>
            <minus/>
            <ci>I2</ci>
            <cn cellml:units="strain">3</cn>
          </apply>
          <ci>Emn</ci>
        </apply>
      </apply>
    </math>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdevms_calculation_eq">
      <apply id="Tdevms_calculation">
        <eq/>
        <ci>Tdevms</ci>
        <apply>
          <times/>
          <cn cellml:units="strain">-4</cn>
          <ci>c21</ci>
          <apply>
            <exp/>
             <apply>
              <times/>
               <ci>c22</ci>
               <apply>
                <power/>
                 <apply>
                  <minus/>
                   <ci>I2</ci>
                   <cn cellml:units="strain">3</cn>
                 </apply>
                 <cn cellml:units="strain">2</cn> 
               </apply>
             </apply>
          </apply>
          <apply>
            <minus/>
            <ci>I2</ci>
            <cn cellml:units="strain">3</cn>
          </apply>
          <ci>Ems</ci>
        </apply>
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdevnn_calculation_eq">
      <apply id="Tdevnn_calculation">
        <eq/>
        <ci>Tdevnn</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <cn cellml:units="strain">2</cn>
            <ci>c11</ci>
            <apply>
              <exp/>
               <apply>
                <times/>
                 <ci>c12</ci>
                 <apply>
                  <power/>
                   <apply>
                    <minus/>
                     <ci>I1</ci>
                     <cn cellml:units="strain">3</cn>
                   </apply>
                   <cn cellml:units="strain">2</cn> 
                 </apply>
               </apply>
            </apply>
            <apply>
              <minus/>
              <ci>I1</ci>
              <cn cellml:units="strain">3</cn>
            </apply>
          </apply>
          <apply>
            <times/>
            <cn cellml:units="strain">4</cn>
            <ci>c21</ci>
            <apply>
              <exp/>
               <apply>
                <times/>
                 <ci>c22</ci>
                 <apply>
                  <power/>
                   <apply>
                    <minus/>
                     <ci>I2</ci>
                     <cn cellml:units="strain">3</cn>
                   </apply>
                   <cn cellml:units="strain">2</cn> 
                 </apply>
               </apply>
            </apply>
            <apply>
              <minus/>
              <ci>I2</ci>
              <cn cellml:units="strain">3</cn>
            </apply>
            <apply>
              <plus/>
              <cn cellml:units="strain">1</cn>
              <ci>Emm</ci>
              <ci>Ess</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdevss_calculation_eq">
      <apply id="Tdevss_calculation">
        <eq/>
        <ci>Tdevss</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <cn cellml:units="strain">2</cn>
            <ci>c11</ci>
            <apply>
              <exp/>
               <apply>
                <times/>
                 <ci>c12</ci>
                 <apply>
                  <power/>
                   <apply>
                    <minus/>
                     <ci>I1</ci>
                     <cn cellml:units="strain">3</cn>
                   </apply>
                   <cn cellml:units="strain">2</cn> 
                 </apply>
               </apply>
            </apply>
            <apply>
              <minus/>
              <ci>I1</ci>
              <cn cellml:units="strain">3</cn>
            </apply>
          </apply>
          <apply>
            <times/>
            <cn cellml:units="strain">4</cn>
            <ci>c21</ci>
            <apply>
              <exp/>
               <apply>
                <times/>
                 <ci>c22</ci>
                 <apply>
                  <power/>
                   <apply>
                    <minus/>
                     <ci>I2</ci>
                     <cn cellml:units="strain">3</cn>
                   </apply>
                   <cn cellml:units="strain">2</cn> 
                 </apply>
               </apply>
            </apply>
            <apply>
              <minus/>
              <ci>I2</ci>
              <cn cellml:units="strain">3</cn>
            </apply>
            <apply>
              <plus/>
              <cn cellml:units="strain">1</cn>
              <ci>Emm</ci>
              <ci>Enn</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <cn cellml:units="strain">2</cn>
            <ci>c81</ci>
            <apply>
              <exp/>
               <apply>
                <times/>
                 <ci>c82</ci>
                 <apply>
                  <power/>
                   <apply>
                    <minus/>
                     <apply>
                      <times/>
                       <ci>I8</ci>
                       <apply>
                        <minus/>
                         <cn cellml:units="strain">1</cn>
                         <apply>
                          <times/>
                           <cn cellml:units="strain">3</cn>
                           <ci>kappa2</ci>
                         </apply>
                       </apply>
                     </apply>
                     <cn cellml:units="strain">1</cn>
                   </apply>
                   <cn cellml:units="strain">2</cn>
                 </apply>
               </apply>
             </apply>
             <apply>
              <minus/>
               <apply>
                <times/>
                 <ci>I8</ci>
                 <apply>
                  <minus/>
                    <cn cellml:units="strain">1</cn>
                    <apply>
                    <times/>
                      <cn cellml:units="strain">3</cn>
                      <ci>kappa2</ci>
                    </apply>
                  </apply>
                </apply>
                <cn cellml:units="strain">1</cn>
             </apply>
             <apply>
              <minus/>
               <cn cellml:units="strain">1</cn>
               <apply>
                <times/>
                 <cn cellml:units="strain">3</cn>
                 <ci>kappa2</ci>
               </apply>
             </apply>
          </apply>
        </apply>
      </apply>
    </math>

     
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdevns_calculation_eq">
      <apply id="Tdevns_calculation">
        <eq/>
        <ci>Tdevns</ci>
        <apply>
          <times/>
          <cn cellml:units="strain">-4</cn>
          <ci>c21</ci>
          <apply>
            <exp/>
             <apply>
              <times/>
               <ci>c22</ci>
               <apply>
                <power/>
                 <apply>
                  <minus/>
                   <ci>I2</ci>
                   <cn cellml:units="strain">3</cn>
                 </apply>
                 <cn cellml:units="strain">2</cn> 
               </apply>
             </apply>
          </apply>
          <apply>
            <minus/>
            <ci>I2</ci>
            <cn cellml:units="strain">3</cn>
          </apply>
          <ci>Ens</ci>
        </apply>
      </apply>
    </math>
         
 
  </component>
  <!--membrane-->

  <connection>
    <map_components component_2="equations" component_1="interface"/>
    <map_variables variable_2="Emm" variable_1="Emm"/>
    <map_variables variable_2="Emn" variable_1="Emn"/>
    <map_variables variable_2="Ems" variable_1="Ems"/>
    <map_variables variable_2="Enn" variable_1="Enn"/>
    <map_variables variable_2="Ens" variable_1="Ens"/>
    <map_variables variable_2="Ess" variable_1="Ess"/>
    <map_variables variable_2="Tdevmm" variable_1="Tdevmm"/>
    <map_variables variable_2="Tdevmn" variable_1="Tdevmn"/>
    <map_variables variable_2="Tdevms" variable_1="Tdevms"/>
    <map_variables variable_2="Tdevnn" variable_1="Tdevnn"/>
    <map_variables variable_2="Tdevns" variable_1="Tdevns"/>
    <map_variables variable_2="Tdevss" variable_1="Tdevss"/>
    <map_variables variable_2="c11" variable_1="c11"/>
    <map_variables variable_2="c12" variable_1="c12"/>
    <map_variables variable_2="c21" variable_1="c21"/>
    <map_variables variable_2="c22" variable_1="c22"/>
    <map_variables variable_2="c41" variable_1="c41"/>
    <map_variables variable_2="c42" variable_1="c42"/>
    <map_variables variable_2="c81" variable_1="c81"/>
    <map_variables variable_2="c82" variable_1="c82"/>
    <map_variables variable_2="kappa1" variable_1="kappa1"/>
    <map_variables variable_2="kappa2" variable_1="kappa2"/>

  </connection>
  
  <group>
    <relationship_ref relationship="encapsulation"/>
    <component_ref component="interface">
      <component_ref component="equations"/>
    </component_ref>
  </group>







<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#ab477af8-c7f6-42dd-8eff-5c201e500c81">
    <rdf:li rdf:resource="rdf:#f7a8063e-f4fc-467f-bd50-928b5ed45b3d"/>
    <rdf:li rdf:resource="rdf:#caf5d536-8f44-4c62-be74-c5aaab20e06a"/>
    <rdf:li rdf:resource="rdf:#e8acdb54-5277-42c4-81d0-6fce9abf5e4f"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#6ccb67df-4b8a-404c-9874-a4c638cce7b5">
    <vCard:FN>Vignesh Kumar</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0888d485-4a36-4f01-af68-94de77115883">
    <dc:creator rdf:resource="rdf:#ab477af8-c7f6-42dd-8eff-5c201e500c81"/>
    <dc:title>Hyperelastic modelling of arterial layers with distributed collagen fibre orientations</dc:title>
    <bqs:volume>3(6)</bqs:volume>
    <bqs:first_page>15</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#917cfdc1-231a-4ba5-b6fa-6786e186c813"/>
    <dcterms:issued rdf:resource="rdf:#2f68f2d4-9002-4920-be69-f7bdeec34a7b"/>
    <bqs:last_page>35</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:title>Fibre Dispersion Law (Version B)</dc:title>
	<dc:publisher>University of Auckland</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#62529d88-7895-488a-b9dd-50ca8e578222"/>
    <dcterms:created rdf:resource="rdf:#09771328-076c-4aaf-a0e9-993dc7bd823c"/>
    <dc:creator rdf:resource="rdf:#c1d1b49f-3689-4939-ae5a-0738d7ed6437"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#72a3d572-1998-4c53-8be3-9e08637baa93">
    <vCard:Orgname>Auckland Bioengineering Institute</vCard:Orgname>
    <vCard:Orgunit>University of Auckland</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fba41420-7041-4f2e-b9b9-1a1873264f03">
    <vCard:Given>G</vCard:Given>
    <vCard:Family>Holzapfel</vCard:Family>
    <vCard:Other>A</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#12b4210f-317a-4314-9377-e00cf8f2bb3f">
    <dc:creator rdf:resource="rdf:#486228c7-a325-43da-8169-1c60e2b4d680"/>
    <rdf:value>This is a CellML version of the Fibre Dispersion constitutive material law,&#13;
defining the relation between the six independent strain components&#13;
and the stress components. It is assumed that the strain components&#13;
will be controlled externally by the application using this CellML&#13;
model.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#96928ff9-966b-4fdc-8364-a46814bcdbfd">
    <vCard:Given>R</vCard:Given>
    <vCard:Family>Ogden</vCard:Family>
    <vCard:Other>W</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#19cf932b-41bc-4d47-a71c-0310bd3b6c5a">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#e5406dc4-21dd-40e2-949a-b129f3d249ff"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#749ee4bf-e323-4c1c-a741-20465afece61">
    <vCard:Given>T</vCard:Given>
    <vCard:Family>Gasser</vCard:Family>
    <vCard:Other>C</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8b9b1017-74cd-4db5-bc04-56b706ecbb77">
    <vCard:Given>Holger</vCard:Given>
    <vCard:Family>Schmid</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e5234127-36eb-4423-be58-d645e343aad5">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#45bf729c-39f3-40a5-95b3-c46f251e4743"/>
  </rdf:Description>
  <rdf:Description rdf:about="#interface">
    <cmeta:comment rdf:resource="rdf:#8c44a240-cfe1-41a7-88e1-5dc22ae3c615"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#49a9cba6-ea09-4aea-baff-03231453cb1d">
    <vCard:ORG rdf:resource="rdf:#6e97c7fc-3ca4-4255-850b-b032e7a0ef97"/>
    <vCard:EMAIL rdf:resource="rdf:#7a25af11-5d53-41bd-889b-4f9433cc3695"/>
    <vCard:N rdf:resource="rdf:#8b9b1017-74cd-4db5-bc04-56b706ecbb77"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2f68f2d4-9002-4920-be69-f7bdeec34a7b">
    <dcterms:W3CDTF>2006-02-22 00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f0e2132f-ab62-42c5-898a-b04cd13ac8b6">
    <bqs:Pubmed_id>16849214</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#0888d485-4a36-4f01-af68-94de77115883"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b93fb692-e11b-4ac5-9cf2-d27c36a66f0c">
    <dcterms:W3CDTF>2003-12-28</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e8acdb54-5277-42c4-81d0-6fce9abf5e4f">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#fba41420-7041-4f2e-b9b9-1a1873264f03"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5ccc755c-b70c-445b-adb1-5fce98b47e5d">
    <dcterms:modified rdf:resource="rdf:#f7694985-432a-4c8f-85bc-267fc1e5df96"/>
    <rdf:value>
          Added metadata to the model.
        </rdf:value>
    <rdf:type rdf:resource="http://www.cellml.org/metadata/1.0#modification"/>
    <cmeta:modifier rdf:resource="rdf:#fec98d37-fb98-485c-8015-766528967472"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#94687a49-4c9d-4566-9cb5-051fde0f52aa">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#aeee4997-c683-453a-af9c-f50cc73e1809"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c1d1b49f-3689-4939-ae5a-0738d7ed6437">
    <vCard:ORG rdf:resource="rdf:#72a3d572-1998-4c53-8be3-9e08637baa93"/>
    <vCard:EMAIL rdf:resource="rdf:#685646ff-f30c-4fdc-ba3e-c0028d839e4c"/>
    <vCard:N rdf:resource="rdf:#d0fb23c7-b20e-4f7e-b2c9-8a05dd947f3a"/>
  </rdf:Description>
  <rdf:Description rdf:about="#FiberDisperion">
    <bqs:reference rdf:resource="rdf:#d1f921ba-79ca-4512-963a-f918ec2e5518"/>
    <bqs:reference rdf:resource="rdf:#f0e2132f-ab62-42c5-898a-b04cd13ac8b6"/>
    <cmeta:comment rdf:resource="rdf:#12b4210f-317a-4314-9377-e00cf8f2bb3f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#486228c7-a325-43da-8169-1c60e2b4d680">
    <vCard:FN>Vignesh Kumar</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fec98d37-fb98-485c-8015-766528967472">
    <vCard:N rdf:resource="rdf:#07770a85-61b1-41e6-9b8b-5f14acfba0f6"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#62529d88-7895-488a-b9dd-50ca8e578222">
    <dc:creator rdf:resource="rdf:#6ccb67df-4b8a-404c-9874-a4c638cce7b5"/>
    <rdf:value>This CellML file focuses on the development and introduction of a structural continuum framework that is able to represent the dispersion of&#13;
collagen fibres orientation within arterial walls. Thus allowing the development of a new hyperelastic free-energy function &#13;
that is well suited for representing the anisotropic elastic properties of adventitial and intimal layers of arterial walls. This file focuses on the combination 1,2,4,8 of the fibre dispersion law. With '1' and '2' representing the isotropic components of the functional form and '4' and '8' representing the anisotropic components of the functional form.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#09771328-076c-4aaf-a0e9-993dc7bd823c">
    <dcterms:W3CDTF>2007-01-01T00:00:00+13:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7af72926-7d6f-4a43-b754-017715691c72">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value>
      <rdf:Bag>
        <rdf:li>mechanical constitutive laws</rdf:li>
        <rdf:li>constitutive material law</rdf:li>
      </rdf:Bag>
    </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fbec0575-24e0-4188-8b05-fed40e2dd16d">
    <rdf:value>
            In this simple model we only have one component, which holds the
            six equations.
          </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f7694985-432a-4c8f-85bc-267fc1e5df96">
    <dcterms:W3CDTF>2007-02-01</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6e97c7fc-3ca4-4255-850b-b032e7a0ef97">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#07770a85-61b1-41e6-9b8b-5f14acfba0f6">
    <vCard:Given>Yikan</vCard:Given>
    <vCard:Family>Wang</vCard:Family>
    <vCard:Other>M</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#917cfdc1-231a-4ba5-b6fa-6786e186c813">
    <dc:title>Journal of the Royal Society Interface</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7a25af11-5d53-41bd-889b-4f9433cc3695">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>h.schmid@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8c44a240-cfe1-41a7-88e1-5dc22ae3c615">
    <rdf:value>
            We'll use this component as the "interface" to the model, all 
            other components are hidden via encapsulation in this component.
          </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f7a8063e-f4fc-467f-bd50-928b5ed45b3d">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#749ee4bf-e323-4c1c-a741-20465afece61"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d0fb23c7-b20e-4f7e-b2c9-8a05dd947f3a">
    <vCard:Given>Holger</vCard:Given>
    <vCard:Family>Schmid</vCard:Family>
    <vCard:Other/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#685646ff-f30c-4fdc-ba3e-c0028d839e4c">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>h.schmid@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#caf5d536-8f44-4c62-be74-c5aaab20e06a">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#96928ff9-966b-4fdc-8364-a46814bcdbfd"/>
  </rdf:Description>
  <rdf:Description rdf:about="#equations">
    <cmeta:comment rdf:resource="rdf:#fbec0575-24e0-4188-8b05-fed40e2dd16d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d1f921ba-79ca-4512-963a-f918ec2e5518">
    <dc:subject rdf:resource="rdf:#7af72926-7d6f-4a43-b754-017715691c72"/>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dcterms:created rdf:resource="rdf:#b93fb692-e11b-4ac5-9cf2-d27c36a66f0c"/>
    <dc:creator rdf:resource="rdf:#49a9cba6-ea09-4aea-baff-03231453cb1d"/>
  </rdf:Description>
</rdf:RDF>
</model>
