//   FILE :  Polyconvex_law_2005.cml
//
// CREATED :  24th January 2007
//
// LAST MODIFIED : 7th February 2007
//
// AUTHOR :  Jesse Ashton
//           Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of the Polyconvex Anisotropic (Orthotropic) constitutive material law (anisotropic strain-energy function for soft collagenous tissues), defining the relation between the nine independent strain components and the stress components.
//
// CHANGES:
// 18/02/04 - CML - Completed the Metadata.
// publisher: University of Auckland
// comment: FN Vignesh Kumar; This CellML file deals with the introduction of an exponential polyconvex anisotropic strain energy function, for use with modeling applications in regards to soft biological tissues.
// created: W3CDTF 2007-01-24T00:00:00+13:00
// creator: Orgname Auckland Bioengineering Institute; Orgunit The University of Auckland; Given Jesse; Family Ashton
// created: W3CDTF 2007-01-24
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; jash042@ec.auckland.ac.nz; Given Jesse; Family Ashton
// reference: subject_type keyword; polyconvex; soft tissue; constitutive material law; mechanical constitutive laws; anisotropic strain-energy
// reference: Given M; Family Itskov; Given A; Family Ehret; Other E; Given D; Family Mavrilas; title A Polyconvex Anisotropic Strain-Energy Function for Soft Collagenous Tissues; volume 5(1); first_page 17; title Biomechanics and modelling in mechanobiology; W3CDTF 2006-03-01 00:00; last_page 26; Pubmed_id 16362195
// comment: FN Vignesh Kumar; This is a CellML version of the Polyconvex constitutive material law for Orthotropic, Incompressible materials, defining the relation between the nine independent strain components and the stress components. It is assumed that the strain components will be controlled externally by the application using this CellML model.
def model itskov_2006 as
  // Exponential Polyconvex Anisotropic Strain-Energy Function
  //
  // Jesse Ashton
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This is a CellML version of the Polyconvex constitutive material law for Orthotropic, Incompressible materials, defining the relation between the nine independent strain components and the stress components. It is assumed that the strain components will be controlled externally by the application using this CellML model.
  //
  // Please note that this CellML model has been implemented in such a manner that it could be used for peforming finite element model simulations on the CMISS software program developed at the Auckland Bioengineering Institute, The University of Auckland. For additional information on implementation of cellML files in CMISS, please refer to the following Link (http://www.bioeng.auckland.ac.nz/people/nickerso/cmiss/help.html).
  //
  // Model Structure
  //
  // ABSTRACT: Polyconvexity of a strain-energy function is a very important mathematical condition, especially in the context of a boundary-value problem. In the present paper, we propose an exponential polyconvex anisotropic strain-energy function. It is given by a series with an arbitrary number of terms and associated material constants. Each term of this series a priori satisfies the condition of the energy- and stress-free natural state so that no additional restrictions have to be imposed. Due to the exponential form, the proposed hyperelastic model is suitable for soft biological tissues. Thus, a good agreement with experimental data on different types of tissues is achieved.
  //
  // The original paper reference is cited below:
  //
  // A Polyconvex anisotropic strain-energy function for soft collagenous tissues, M. Itskov, A.E. Ehret and D. Mavrilas, 2006. Biomechanics and Modeling in Mechanobiology, 5(1), 17-26. PubMed ID: 16362195 (http://www.ncbi.nlm.nih.gov/entrez/16362195)
  // Global units
  def unit strain as
    unit dimensionless;
  enddef;
  def unit stress as
    unit dimensionless;
  enddef;

  // comment: We'll use this component as the "interface" to the model, all other components are hidden via encapsulation in this component.
  def comp interface as
    // Variables we expect to be set/controlled externally
    var E11: strain {priv: out};
    var E22: strain {priv: out};
    var E33: strain {priv: out};
    var E12: strain {priv: out};
    var E13: strain {priv: out};
    var E21: strain {priv: out};
    var E23: strain {priv: out};
    var E31: strain {priv: out};
    var E32: strain {priv: out};
    var mu1: strain {priv: out, init: 0};
    var a1: strain {priv: out, init: 0};
    var b1: strain {priv: out, init: 0};
    var x11: strain {priv: out, init: 0};
    var x21: strain {priv: out, init: 0};
    var mu2: strain {priv: out, init: 0};
    var a2: strain {priv: out, init: 0};
    var b2: strain {priv: out, init: 0};
    var x12: strain {priv: out, init: 0};
    var x22: strain {priv: out, init: 0};
    // Variables we want to make available externally
    var Tdev11: stress {pub: out, priv: in};
    var Tdev22: stress {pub: out, priv: in};
    var Tdev33: stress {pub: out, priv: in};
    var Tdev12: stress {pub: out, priv: in};
    var Tdev13: stress {pub: out, priv: in};
    var Tdev21: stress {pub: out, priv: in};
    var Tdev23: stress {pub: out, priv: in};
    var Tdev31: stress {pub: out, priv: in};
    var Tdev32: stress {pub: out, priv: in};
  enddef;
  // interface

  // comment: In this simple model we only have one component, which holds the six equations.
  def comp equations as
    // Inputs
    var E11: strain {pub: in};
    var E22: strain {pub: in};
    var E33: strain {pub: in};
    var E12: strain {pub: in};
    var E13: strain {pub: in};
    var E21: strain {pub: in};
    var E23: strain {pub: in};
    var E31: strain {pub: in};
    var E32: strain {pub: in};
    var mu1: strain {pub: in};
    var a1: strain {pub: in};
    var b1: strain {pub: in};
    var x11: strain {pub: in};
    var x21: strain {pub: in};
    var mu2: strain {pub: in};
    var a2: strain {pub: in};
    var b2: strain {pub: in};
    var x12: strain {pub: in};
    var x22: strain {pub: in};
    // Outputs computed here
    var Tdev11: stress {pub: out};
    var Tdev22: stress {pub: out};
    var Tdev33: stress {pub: out};
    var Tdev12: stress {pub: out};
    var Tdev13: stress {pub: out};
    var Tdev21: stress {pub: out};
    var Tdev23: stress {pub: out};
    var Tdev31: stress {pub: out};
    var Tdev32: stress {pub: out};
    // Temporary variables
    var i1: strain {pub: none, priv: none};
    var i2: strain {pub: none, priv: none};
    var i3: strain {pub: none, priv: none};
    var detc: strain {pub: none, priv: none};
    var k1: strain {pub: none, priv: none};
    var k2: strain {pub: none, priv: none};
    var k3: strain {pub: none, priv: none};
    var x11denom: strain {pub: none, priv: none};
    var x21denom: strain {pub: none, priv: none};
    var x12denom: strain {pub: none, priv: none};
    var x22denom: strain {pub: none, priv: none};
    var i1tilde: strain {pub: none, priv: none};
    var i2tilde: strain {pub: none, priv: none};
    var k1tilde: strain {pub: none, priv: none};
    var k2tilde: strain {pub: none, priv: none};
    // Calculation of Temporaries
    i1 = 1{strain}+2{strain}*E11;
    i2 = 1{strain}+2{strain}*E22;
    i3 = 1{strain}+2{strain}*E33;
    detc = 1{strain}+2{strain}*E11+(-4{strain}*E12*E21)+2{strain}*E22+4{strain}*E11*E22+(-4{strain}*E13*E31)+(-(-8{strain})*E13*E22*E31)+8{strain}*E12*E23*E31+8{strain}*E13*E21*E32+(-4{strain}*E23*E32)+(-8{strain}*E11*E23*E31)+2{strain}*E33+4{strain}*E11*E33+(-(-8{strain})*E12*E21*E33)+4{strain}*E22*E33+8{strain}*E11*E22*E33;
    k1 = (1{strain}+2{strain}*E22+(-4{strain}*E23*E32)+2{strain}*E33+4{strain}*E22*E33)/detc;
    k2 = (1{strain}+2{strain}*E11+(-4{strain}*E13*E31)+2{strain}*E33+4{strain}*E11*E33)/detc;
    k3 = (1{strain}+2{strain}*E11+(-4{strain}*E12*E21)+2{strain}*E22+4{strain}*E11*E22)/detc;
    x11denom = 1{strain}+sqr(x11);
    x21denom = 1{strain}+sqr(x21);
    x12denom = 1{strain}+sqr(x12);
    x22denom = 1{strain}+sqr(x22);
    i1tilde = i1/x11denom+i2*sqr(x11)/(x11denom*x21denom)+i3*sqr(x11)*sqr(x21)/(x11denom*x21denom);
    i2tilde = i1/x12denom+i2*sqr(x12)/(x12denom*x22denom)+i3*sqr(x12)*sqr(x22)/(x12denom*x22denom);
    k1tilde = k1/x11denom+k2*sqr(x11)/(x11denom*x21denom)+k3*sqr(x11)*sqr(x21)/(x11denom*x21denom);
    k2tilde = k1/x12denom+k2*sqr(x12)/(x12denom*x22denom)+k3*sqr(x12)*sqr(x22)/(x12denom*x22denom);
    // Calculation of Stress
    Tdev11 = 0.5{dimensionless}*(mu1*(exp((i1tilde-1{dimensionless})*a1)/x11denom+(-1{dimensionless}*exp((k1tilde-1{dimensionless})*b1)*(sqr(k1)/x11denom+(-4{dimensionless}*E33*E21+(-2{dimensionless}*E21)+4{dimensionless}*E23*E31)*(-4{dimensionless}*E33*E12+(-2{dimensionless}*E12)+4{dimensionless}*E13*E32)*sqr(x11)/(sqr(detc)*x11denom*x21denom)+(-4{dimensionless}*E22*E13+(-2{dimensionless}*E13)+4{dimensionless}*E12*E23)*(-4{dimensionless}*E22*E31+(-2{dimensionless}*E31)+4{dimensionless}*E21*E32)*sqr(x11)*sqr(x21)/(sqr(detc)*x11denom*x21denom))))+mu2*(exp((i2tilde-1{dimensionless})*a2)/x12denom+(-1{dimensionless}*exp((k2tilde-1{dimensionless})*b2)*(sqr(k1)/x12denom+(-4{dimensionless}*E33*E21+(-2{dimensionless}*E21)+4{dimensionless}*E23*E31)*(-4{dimensionless}*E33*E12+(-2{dimensionless}*E12)+4{dimensionless}*E13*E32)*sqr(x12)/(sqr(detc)*x12denom*x22denom)+divide((-4{dimensionless}*E22*E31+(-2{dimensionless}*E13)+4{dimensionless}*E12*E23)*(-4{dimensionless}*E22*E31+(-2{dimensionless}*E31)+4{dimensionless}*E21*E32)*sqr(x12)*sqr(x22))))+sqr(detc)*x12denom*x22denom));
    Tdev12 = 0.5{dimensionless}*(-1{dimensionless}*mu1*exp((k1tilde-1{dimensionless})*b1)*((-4{dimensionless}*E22*E13+(-2{dimensionless}*E13)+4{dimensionless}*E12*E23)*(4{dimensionless}*E12*E31+(-4{dimensionless}*E11*E32)+(-2{dimensionless}*E32))*sqr(x21)*sqr(x11)/(sqr(detc)*x11denom*x21denom)+(-4{dimensionless}*E33*E12+(-2{dimensionless}*E12)+4{dimensionless}*E13*E32)*sqr(x11)*k2/(detc*x11denom*x21denom)+(-4{dimensionless}*E33*E12+(-2{dimensionless}*E12)+4{dimensionless}*E13*E32)*k1/(detc*x11denom))+(-1{dimensionless}*mu2*exp((k2tilde-1{dimensionless})*b2)*((-4{dimensionless}*E22*E13+(-2{dimensionless}*E13)+4{dimensionless}*E12*E23)*(4{dimensionless}*E12*E31+(-4{dimensionless}*E11*E32)+(-2{dimensionless}*E32))*sqr(x22)*sqr(x12)/(sqr(detc)*x12denom*x22denom)+(-4{dimensionless}*E33*E12+(-2{dimensionless}*E12)+4{dimensionless}*E13*E32)*sqr(x12)*k2/(detc*x12denom*x22denom)+(-4{dimensionless}*E33*E12+(-2{dimensionless}*E12)+4{dimensionless}*E13*E32)*k1/(detc*x12denom))));
    Tdev13 = 0.5{dimensionless}*(-1{dimensionless}*mu1*exp((k1tilde-1{dimensionless})*b1)*((4{dimensionless}*E13*E21+(-2{dimensionless}*E23)+(-4{dimensionless}*E11*E23))*(4{dimensionless}*E13*E32+(-4{dimensionless}*E33*E12)+(-2{dimensionless}*E12))*sqr(x11)/(sqr(detc)*x11denom*x21denom)+(-4{dimensionless}*E22*E13+(-2{dimensionless}*E13)+4{dimensionless}*E12*E23)*sqr(x21)*sqr(x11)*k3/(detc*x11denom*x21denom)+(-4{dimensionless}*E22*E13+(-2{dimensionless}*E13)+4{dimensionless}*E12*E23)*k1/(detc*x11denom))+(-1{dimensionless}*mu2*exp((k2tilde-1{dimensionless})*b2)*((4{dimensionless}*E13*E21+(-2{dimensionless}*E23)+(-4{dimensionless}*E11*E23))*(4{dimensionless}*E13*E32+(-4{dimensionless}*E33*E12)+(-2{dimensionless}*E12))*sqr(x12)/(sqr(detc)*x12denom*x22denom)+(-4{dimensionless}*E22*E13+(-2{dimensionless}*E13)+4{dimensionless}*E12*E23)*sqr(x12)*sqr(x22)*k3/(detc*x12denom*x22denom)+(-4{dimensionless}*E22*E13+(-2{dimensionless}*E13)+4{dimensionless}*E12*E23)*k1/(detc*x12denom))));
    Tdev21 = 0.5{dimensionless}*(-1{dimensionless}*mu1*exp((k1tilde-1{dimensionless})*b1)*((4{dimensionless}*E13*E21+(-2{dimensionless}*E23)+(-4{dimensionless}*E11*E23))*(4{dimensionless}*E21*E32+(-4{dimensionless}*E22*E31)+(-2{dimensionless}*E31))*sqr(x21)*sqr(x11)/(sqr(detc)*x11denom*x21denom)+(-4{dimensionless}*E33*E21+(-2{dimensionless}*E21)+4{dimensionless}*E23*E31)*sqr(x11)*k2/(detc*x11denom*x21denom)+(-4{dimensionless}*E33*E21+(-2{dimensionless}*E21)+4{dimensionless}*E23*E31)*k1/(detc*x11denom))+(-1{dimensionless}*mu2*exp((k2tilde-1{dimensionless})*b2)*((4{dimensionless}*E13*E21+(-2{dimensionless}*E23)+(-4{dimensionless}*E11*E23))*(4{dimensionless}*E21*E32+(-4{dimensionless}*E22*E31)+(-2{dimensionless}*E31))*sqr(x12)*sqr(x22)/(sqr(detc)*x12denom*x22denom)+(-4{dimensionless}*E33*E21+(-2{dimensionless}*E21)+4{dimensionless}*E23*E31)*sqr(x12)*k2/(detc*x12denom*x22denom)+(-4{dimensionless}*E33*E21+(-2{dimensionless}*E21)+4{dimensionless}*E23*E31)*k1/(detc*x12denom))));
    Tdev22 = 0.5{dimensionless}*(mu1*(exp((i1tilde-1{dimensionless})*a1)*sqr(x11)/(x11denom*x21denom)+(-1{dimensionless}*exp((k1tilde-1{dimensionless})*b1)*(sqr(k2)*sqr(x11)/(x11denom*x21denom)+(-4{dimensionless}*E11*E23+(-2{dimensionless}*E23)+4{dimensionless}*E31*E21)*(-4{dimensionless}*E11*E32+(-2{dimensionless}*E32)+4{dimensionless}*E12*E31)*sqr(x11)*sqr(x21)/(sqr(detc)*x11denom*x21denom)+(-4{dimensionless}*E33*E21+(-2{dimensionless}*E21)+4{dimensionless}*E23*E31)*(-4{dimensionless}*E33*E12+(-2{dimensionless}*E12)+4{dimensionless}*E13*E32)/(sqr(detc)*x11denom))))+mu2*(exp((i2tilde-1{dimensionless})*a2)*sqr(x12)/(x12denom*x22denom)+(-1{dimensionless}*exp((k2tilde-1{dimensionless})*b2)*(sqr(k2)*sqr(x12)/(x12denom*x22denom)+(4{dimensionless}*E13*E21+(-2{dimensionless}*E23)+(-4{dimensionless}*E11*E23))*(-4{dimensionless}*E11*E32+(-2{dimensionless}*E32)+4{dimensionless}*E12*E31)*sqr(x12)*sqr(x22)/(sqr(detc)*x12denom*x22denom)+divide((-4{dimensionless}*E33*E21+(-2{dimensionless}*E21)+4{dimensionless}*E23*E31)*(-4{dimensionless}*E33*E12+(-2{dimensionless}*E12)+4{dimensionless}*E13*E32))+times+sqr(detc)+x12denom))));
    Tdev23 = 0.5{dimensionless}*(-1{dimensionless}*mu1*exp((k1tilde-1{dimensionless})*b1)*((4{dimensionless}*E13*E21+(-2{dimensionless}*E23)+(-4{dimensionless}*E11*E23))*sqr(x21)*sqr(x11)*k3/(detc*x11denom*x21denom)+(-4{dimensionless}*E11*E23+(-2{dimensionless}*E23)+4{dimensionless}*E13*E21)*sqr(x11)*k2/(detc*x11denom*x21denom)+(-4{dimensionless}*E22*E13+(-2{dimensionless}*E13)+4{dimensionless}*E12*E23)*(-4{dimensionless}*E33*E21+(-2{dimensionless}*E21)+4{dimensionless}*E23*E31)/(sqr(detc)*x11denom))+(-1{dimensionless}*mu2*exp((k2tilde-1{dimensionless})*b2)*((4{dimensionless}*E13*E21+(-2{dimensionless}*E23)+(-4{dimensionless}*E11*E23))*k3*sqr(x12)*sqr(x22)/(detc*x12denom*x22denom)+(-4{dimensionless}*E11*E23+(-2{dimensionless}*E23)+4{dimensionless}*E13*E21)*sqr(x12)*k2/(detc*x12denom*x22denom)+(-4{dimensionless}*E22*E13+(-2{dimensionless}*E13)+4{dimensionless}*E12*E23)*(-4{dimensionless}*E33*E21+(-2{dimensionless}*E21)+4{dimensionless}*E23*E31)/(sqr(detc)*x12denom))));
    Tdev31 = 0.5{dimensionless}*(-1{dimensionless}*mu1*exp((k1tilde-1{dimensionless})*b1)*((4{dimensionless}*E21*E32+(-2{dimensionless}*E31)+(-4{dimensionless}*E22*E31))*sqr(x21)*sqr(x11)*k3/(detc*x11denom*x21denom)+(-4{dimensionless}*E22*E31+(-2{dimensionless}*E31)+4{dimensionless}*E21*E32)*k1/(detc*x11denom)+(-4{dimensionless}*E33*E21+(-2{dimensionless}*E21)+4{dimensionless}*E23*E31)*(4{dimensionless}*E12*E31+(-2{dimensionless}*E32)+(-4{dimensionless}*E11*E32))*sqr(x11)/(sqr(detc)*x11denom*x21denom))+(-1{dimensionless}*mu2*exp((k2tilde-1{dimensionless})*b2)*((4{dimensionless}*E21*E32+(-2{dimensionless}*E31)+(-4{dimensionless}*E22*E31))*k3*sqr(x12)*sqr(x22)/(detc*x12denom*x22denom)+(-4{dimensionless}*E22*E31+(-2{dimensionless}*E31)+4{dimensionless}*E21*E32)*k1/(detc*x12denom)+(-4{dimensionless}*E33*E21+(-2{dimensionless}*E21)+4{dimensionless}*E23*E31)*(-4{dimensionless}*E11*E32+(-2{dimensionless}*E32)+4{dimensionless}*E12*E31)*sqr(x12)/(sqr(detc)*x12denom*x22denom))));
    Tdev32 = 0.5{dimensionless}*(-1{dimensionless}*mu1*exp((k1tilde-1{dimensionless})*b1)*((4{dimensionless}*E12*E31+(-2{dimensionless}*E32)+(-4{dimensionless}*E11*E32))*sqr(x21)*sqr(x11)*k3/(detc*x11denom*x21denom)+(-4{dimensionless}*E11*E32+(-2{dimensionless}*E32)+4{dimensionless}*E12*E31)*sqr(x11)*k2/(detc*x11denom*x21denom)+(-4{dimensionless}*E33*E12+(-2{dimensionless}*E12)+4{dimensionless}*E13*E32)*(-4{dimensionless}*E22*E31+(-2{dimensionless}*E31)+4{dimensionless}*E21*E32)/(sqr(detc)*x11denom))+(-1{dimensionless}*mu2*exp((k2tilde-1{dimensionless})*b2)*((4{dimensionless}*E12*E31+(-2{dimensionless}*E32)+(-4{dimensionless}*E11*E32))*k2*sqr(x12)/(detc*x12denom*x22denom)+(-4{dimensionless}*E11*E32+(-2{dimensionless}*E32)+4{dimensionless}*E12*E31)*sqr(x12)*sqr(x22)*k3/(detc*x12denom*x22denom)+(-4{dimensionless}*E33*E12+(-2{dimensionless}*E12)+4{dimensionless}*E13*E32)*(-4{dimensionless}*E22*E31+(-2{dimensionless}*E31)+4{dimensionless}*E21*E32)/(sqr(detc)*x12denom))));
    Tdev33 = 0.5{dimensionless}*(mu1*(exp((i1tilde-1{dimensionless})*a1)*sqr(x11)*sqr(x21)/(x11denom*x21denom)+(-1{dimensionless}*exp((k1tilde-1{dimensionless})*b1)*(sqr(k3)*sqr(x11)*sqr(x21)/(x11denom*x21denom)+(-4{dimensionless}*E11*E23+(-2{dimensionless}*E23)+4{dimensionless}*E13*E21)*(-4{dimensionless}*E11*E32+(-2{dimensionless}*E32)+4{dimensionless}*E12*E31)*sqr(x11)/(sqr(detc)*x11denom*x21denom)+(-4{dimensionless}*E22*E13+(-2{dimensionless}*E13)+4{dimensionless}*E12*E23)*(-4{dimensionless}*E22*E31+(-2{dimensionless}*E31)+4{dimensionless}*E21*E32)/(sqr(detc)*x11denom))))+mu2*(exp((i2tilde-1{dimensionless})*a2)*sqr(x12)*sqr(x22)/(x12denom*x22denom)+(-1{dimensionless}*exp((k2tilde-1{dimensionless})*b2)*(sqr(k3)*sqr(x12)*sqr(x22)/(x12denom*x22denom)+(4{dimensionless}*E13*E21+(-2{dimensionless}*E23)+(-4{dimensionless}*E11*E23))*(-4{dimensionless}*E11*E32+(-2{dimensionless}*E32)+4{dimensionless}*E12*E31)*sqr(x12)/(sqr(detc)*x12denom*x22denom)+divide((-4{dimensionless}*E22*E13+(-2{dimensionless}*E13)+4{dimensionless}*E12*E23)*(-4{dimensionless}*E22*E31+(-2{dimensionless}*E31)+4{dimensionless}*E21*E32))+sqr(detc)*x12denom))));
  enddef;
  def map between interface and equations for
    vars E11 and E11;
    vars E22 and E22;
    vars E33 and E33;
    vars E12 and E12;
    vars E13 and E13;
    vars E21 and E21;
    vars E23 and E23;
    vars E31 and E31;
    vars E32 and E32;
    vars Tdev11 and Tdev11;
    vars Tdev22 and Tdev22;
    vars Tdev33 and Tdev33;
    vars Tdev12 and Tdev12;
    vars Tdev13 and Tdev13;
    vars Tdev21 and Tdev21;
    vars Tdev23 and Tdev23;
    vars Tdev31 and Tdev31;
    vars Tdev32 and Tdev32;
    vars mu1 and mu1;
    vars a1 and a1;
    vars b1 and b1;
    vars x11 and x11;
    vars x21 and x21;
    vars mu2 and mu2;
    vars a2 and a2;
    vars b2 and b2;
    vars x12 and x12;
    vars x22 and x22;
  enddef;

  def group as encapsulation for
    comp interface incl
      comp equations;
    endcomp;
  enddef;
enddef;
