<?xml version="1.0"?>


<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="mclean_2003" cmeta:id="mclean_2003" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Development and validation of a 3-D model to predict knee joint loading during dynamic movement</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This CellML runs in OpenCell (note that it cannot be run in COR due to "circular arguments" or "DAEs").  The units have been checked and they are consistent.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: The purpose of this study was to develop a subject-specific 3-D model of the lower extremity to predict neuromuscular control effects on 3-D knee joint loading during movements that can potentially cause injury to the anterior cruciate ligament (ACL) in the knee. The simulation consisted of a forward dynamic 3-D musculoskeletal model of the lower extremity, scaled to represent a specific subject. Inputs of the model were the initial position and velocity of the skeletal elements, and the muscle stimulation patterns. Outputs of the model were movement and ground reaction forces, as well as resultant 3-D forces and moments acting across the knee joint. An optimization method was established to find muscle stimulation patterns that best reproduced the subject's movement and ground reaction forces during a sidestepping task. The optimized model produced movements and forces that were generally within one standard deviation of the measured subject data. Resultant knee joint loading variables extracted from the optimized model were comparable to those reported in the literature. The ability of the model to successfully predict the subject's response to altered initial conditions was quantified and found acceptable for use of the model to investigate the effect of altered neuromuscular control on knee joint loading during sidestepping. Monte Carlo simulations (N = 100,000) using randomly perturbed initial kinematic conditions, based on the subject's variability, resulted in peak anterior force, valgus torque and internal torque values of 378 N, 94 Nm and 71 Nm, respectively, large enough to cause ACL rupture. We conclude that the procedures described in this paper were successful in creating valid simulations of normal movement, and in simulating injuries that are caused by perturbed neuromuscular control.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Development and validation of a 3-D model to predict knee joint loading during dynamic movement, S.G. McLean, A. Su and A.J. van den Bogert, 2003,<emphasis>Journal of Biomechanical Engineering</emphasis>, 125, 6, 864-874. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/14986412">PubMed ID: 14986412</ulink>
</para>

</sect1>
</article>
</documentation>


  <units name="metre_per_second">
      <unit units="metre"/>
      <unit exponent="-1" units="second"/>
   </units>
   <units name="per_metre">
      <unit exponent="-1" units="metre"/>
   </units>
   <units name="per_metre_second">
      <unit exponent="-1" units="metre"/>
	  <unit exponent="-1" units="second"/>
   </units>
   <units name="per_second">
      <unit exponent="-1" units="second"/>
   </units>
   <units name="second_per_metre">
      <unit units="second"/>
      <unit exponent="-1" units="metre"/>
   </units>
   <units name="newton_per_second">
      <unit units="newton"/>
      <unit exponent="-1" units="second"/>
   </units>
   <units name="newton_per_metre2">
      <unit units="newton"/>
      <unit exponent="-2" units="metre"/>
   </units>
   
 <component name="environment">
   <variable name="time" public_interface="out" units="second"/>
 </component>
 
 <component name="F_CE">
   <variable name="F_CE" public_interface="out" units="newton"/>
   <variable name="f_L_CE" public_interface="in" units="newton"/>
   <variable name="g_V_CE" public_interface="in" units="dimensionless"/>
   <variable name="a" public_interface="in" units="dimensionless"/>
   <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply>
       <eq/>
       <ci>F_CE</ci>
       <apply>
         <times/>
         <ci>f_L_CE</ci>
         <ci>g_V_CE</ci>
         <ci>a</ci>
       </apply>
     </apply>
   </math>
 </component>
 
 <component name="f_L_CE">
   <variable name="f_L_CE" public_interface="out" units="newton"/>
   <variable initial_value="10" name="F_min" public_interface="out" units="newton"/>
   <variable name="F_max" public_interface="in" units="newton"/>
   <variable name="L_CE" public_interface="in" units="metre"/>
   <variable name="L_CE_opt" public_interface="in" units="metre"/>
   <variable initial_value="0.63" name="W" units="dimensionless"/>
   
   <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply>
	   <eq/>
	   <ci>f_L_CE</ci>
	   <apply><divide/>
	     <apply><times/>
		   <ci>F_max</ci>
		   <apply><minus/>
		     <apply><times/>
			   <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="metre">1</cn>
			   <apply><minus/>
			     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="metre">1</cn>
				 <ci>L_CE</ci>
			   </apply>
			 </apply>
			 <apply><power/>
			   <ci>L_CE_opt</ci>
			   <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
			 </apply>
		   </apply>
		 </apply>
		 <apply><times/>
		   <apply><power/>
		     <ci>W</ci>
			 <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
		   </apply>
		   <apply><power/>
		     <ci>L_CE_opt</ci>
			 <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
		   </apply>
		 </apply>
	   </apply>
	 </apply>
   </math>
 </component>
 
 <component name="g_V_CE">
   <variable name="g_V_CE" public_interface="out" units="dimensionless"/>
   <variable name="lambda_a" public_interface="in" units="second_per_metre"/>
   <variable initial_value="0.93" name="V_max" units="metre_per_second"/>
   <variable name="V_CE" public_interface="in" units="dimensionless"/>
   <variable initial_value="0.25" name="A" units="dimensionless"/>
   <variable initial_value="1.5" name="g_max" units="dimensionless"/>
   <variable name="d1" public_interface="in" units="dimensionless"/>
   <variable name="d2" public_interface="in" units="dimensionless"/>
   <variable name="d3" public_interface="in" units="dimensionless"/>
   <variable initial_value="5.67" name="gamma" units="dimensionless"/>
   
   <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply>
       <eq/>
       <ci>g_V_CE</ci>
       <piecewise>
         <piece>
           <apply>
             <divide/>
             <apply>
               <plus/>
               <apply>
                 <times/>
                 <ci>lambda_a</ci>
                 <ci>V_max</ci>
               </apply>
               <ci>V_CE</ci>
             </apply>
             <apply>
               <minus/>
               <apply>
                 <times/>
                 <ci>lambda_a</ci>
                 <ci>V_max</ci>
               </apply>
               <apply>
                 <divide/>
                 <ci>V_CE</ci>
                 <ci>A</ci>
               </apply>
             </apply>
           </apply>
           <apply>
             <leq/>
             <ci>V_CE</ci>
             <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0</cn>
           </apply>
         </piece>
         <piece>
           <apply>
             <divide/>
             <apply>
               <plus/>
               <apply>
                 <times/>
                 <ci>g_max</ci>
                 <ci>V_CE</ci>
               </apply>
               <ci>d1</ci>
             </apply>
             <apply>
               <plus/>
               <ci>V_CE</ci>
               <ci>d1</ci>
             </apply>
           </apply>
           <apply>
             <and/>
             <apply>
               <lt/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0</cn>
               <ci>V_CE</ci>
             </apply>
             <apply>
               <leq/>
			   <ci>V_CE</ci>
			   <apply>
                 <times/>
                 <ci>gamma</ci>
                 <ci>d1</ci>
			   </apply>
             </apply>
           </apply>
         </piece>
         <piece>
           <apply>
             <plus/>
             <ci>d3</ci>
             <apply>
               <times/>
               <ci>d2</ci>
               <ci>V_CE</ci>
             </apply>
           </apply>
           <apply>
             <gt/>
             <ci>V_CE</ci>
             <apply>
               <times/>
               <ci>gamma</ci>
               <ci>d1</ci>
             </apply>
           </apply>
         </piece>
       </piecewise>
     </apply>
   </math>
 </component>
 
 <component name="d1">
   <variable name="d1" public_interface="out" units="dimensionless"/>
   <variable initial_value="0.93" name="V_max" units="metre_per_second"/>
   <variable initial_value="0.25" name="A" units="dimensionless"/>
   <variable initial_value="1.5" name="g_max" units="dimensionless"/>
   <variable initial_value="2" name="S" units="metre_per_second"/>
   <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply>
       <eq/>
       <ci>d1</ci>
       <apply>
         <divide/>
         <apply>
           <times/>
           <ci>V_max</ci>
           <ci>A</ci>
           <apply>
             <minus/>
             <ci>g_max</ci>
             <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
           </apply>
         </apply>
         <apply>
           <times/>
           <ci>S</ci>
           <apply>
             <plus/>
             <ci>A</ci>
             <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
           </apply>
         </apply>
       </apply>
     </apply>
   </math>
 </component>
 
 <component name="d2">
   <variable name="d2" public_interface="out" units="dimensionless"/>
   <variable initial_value="2" name="S" units="metre_per_second"/>
   <variable initial_value="0.25" name="A" units="dimensionless"/>
   <variable initial_value="0.93" name="V_max" units="metre_per_second"/>
   <variable initial_value="5.67" name="gamma" units="dimensionless"/>
   <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply>
       <eq/>
       <ci>d2</ci>
       <apply>
         <divide/>
         <apply>
           <times/>
           <ci>S</ci>
           <apply>
             <plus/>
             <ci>A</ci>
             <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
           </apply>
         </apply>
         <apply>
           <times/>
           <ci>V_max</ci>
           <ci>A</ci>
           <apply>
             <power/>
             <apply>
               <plus/>
               <ci>gamma</ci>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
             </apply>
             <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
           </apply>
         </apply>
       </apply>
     </apply>
   </math>
 </component>
 
 <component name="d3">
   <variable name="d3" public_interface="out" units="dimensionless"/>
   <variable initial_value="1.5" name="g_max" units="dimensionless"/>
   <variable initial_value="5.67" name="gamma" units="dimensionless"/>
   <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply>
       <eq/>
       <ci>d3</ci>
       <apply>
         <plus/>
         <apply>
           <divide/>
           <apply>
             <times/>
             <apply>
               <minus/>
               <ci>g_max</ci>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
             </apply>
             <apply>
               <power/>
               <ci>gamma</ci>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
             </apply>
           </apply>
           <apply>
             <power/>
             <apply>
               <plus/>
               <ci>gamma</ci>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
             </apply>
             <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
           </apply>
         </apply>
         <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
       </apply>
     </apply>
   </math>
 </component>
 
 <component name="F_SEE">
   <variable name="F_SEE" public_interface="out" units="newton"/>
   <variable initial_value="1000000" name="k_SEE" units="newton_per_metre2"/>
   <variable name="L_SEE" public_interface="in" units="metre"/>
   <variable initial_value="0.0025" name="L_slack" units="metre"/>
   <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply>
       <eq/>
       <ci>F_SEE</ci>
       <piecewise>
         <piece>
           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="newton">0</cn>
           <apply>
             <leq/>
             <ci>L_SEE</ci>
             <ci>L_slack</ci>
           </apply>
         </piece>
         <otherwise>
           <apply>
             <times/>
             <ci>k_SEE</ci>
             <apply>
               <power/>
               <apply>
                 <minus/>
                 <ci>L_SEE</ci>
                 <ci>L_slack</ci>
               </apply>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
             </apply>
           </apply>
         </otherwise>
       </piecewise>
     </apply>
   </math>
 </component>
 
 <component name="F_PEE">
   <variable name="F_PEE" public_interface="out" units="newton"/>
   <variable name="k_PEE" public_interface="in" units="newton_per_metre2"/>
   <variable name="L_CE" public_interface="in" units="metre"/>
   <variable initial_value="0.0025" name="L_slack" units="metre"/>
   <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply>
       <eq/>
       <ci>F_PEE</ci>
       <piecewise>
         <piece>
           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="newton">0</cn>
           <apply>
             <leq/>
             <ci>L_CE</ci>
             <ci>L_slack</ci>
           </apply>
         </piece>
         <otherwise>
           <apply>
             <times/>
             <ci>k_PEE</ci>
             <apply>
               <power/>
               <apply>
                 <minus/>
                 <ci>L_CE</ci>
                 <ci>L_slack</ci>
               </apply>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
             </apply>
           </apply>
         </otherwise>
       </piecewise>
     </apply>
   </math>
 </component>
 
 <component name="k_PEE">
   <variable name="k_PEE" public_interface="out" units="newton_per_metre2"/>
   <variable name="F_max" public_interface="in" units="newton"/>
   <variable initial_value="0.63" name="W" units="dimensionless"/>
   <variable initial_value="0.01" name="L_CE_opt" units="metre"/>
   <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply>
       <eq/>
       <ci>k_PEE</ci>
       <apply>
         <divide/>
         <ci>F_max</ci>
         <apply>
           <power/>
           <apply>
             <times/>
             <ci>W</ci>
             <ci>L_CE_opt</ci>
           </apply>
           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
         </apply>
       </apply>
     </apply>
   </math>
 </component>
 
 <component name="V_CE">
   <variable name="V_CE" public_interface="out" units="dimensionless"/>
   
   <variable name="g_V_CE" public_interface="in" units="dimensionless"/>
   <variable name="F_SEE" public_interface="in" units="newton"/>
   <variable name="L_m" public_interface="in" units="metre"/>
   <variable name="L_CE" public_interface="in" units="metre"/>
   <variable name="F_PEE" public_interface="in" units="newton"/>
   <variable name="a" public_interface="in" units="dimensionless"/>
   <variable name="f_L_CE" public_interface="in" units="newton"/>
   <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply>
       <eq/>
       <ci>V_CE</ci>
       <apply>
         <times/>
		 <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_metre">1</cn>
		 <apply>
         <divide/>
         <apply>
           <times/>
           <apply>
             <divide/>
             <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
             <ci>g_V_CE</ci>
           </apply>
           <apply>
             <minus/>
             <apply>
               <times/>
               <ci>F_SEE</ci>
               <apply>
                 <minus/>
                 <ci>L_m</ci>
                 <ci>L_CE</ci>
               </apply>
             </apply>
             <apply>
               <times/>
               <ci>F_PEE</ci>
               <ci>L_CE</ci>
             </apply>
           </apply>
         </apply>
         <apply>
           <times/>
           <ci>a</ci>
           <ci>f_L_CE</ci>
         </apply>
       </apply>
     </apply>
	 </apply>
   </math>
 </component>
 
 <component name="F_m">
   <variable name="F_m" public_interface="out" units="newton"/>
   <variable name="F_SEE" public_interface="in" units="newton"/>
   <variable name="L_m" public_interface="in" units="metre"/>
   <variable name="L_CE" public_interface="in" units="metre"/>
   <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply><eq/><ci>F_m</ci><ci>F_SEE</ci></apply>
   </math>
 </component>
 
 <component name="user_defined_constants">
   <variable initial_value="0.8" name="a" public_interface="out" units="dimensionless"/>
   <variable initial_value="7000" name="F_max" public_interface="out" units="newton"/>
   <variable initial_value="0.093" name="L_CE_opt" public_interface="out" units="metre"/>
 </component>
 
 <component name="lambda_a">
   <variable name="a" public_interface="in" units="dimensionless"/>
   <variable name="lambda_a" public_interface="out" units="second_per_metre"/>
   <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply>
       <eq/>
       <ci>lambda_a</ci>
       <apply>
         <times/>
		 <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="second_per_metre">1</cn>
		 <apply>
           <plus/>
           <apply>
             <minus/>
             <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
             <apply>
               <exp/>
               <apply>
                 <times/>
                 <apply>
                   <minus/>
                   <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3.82</cn>
                 </apply>
                 <ci>a</ci>
               </apply>
             </apply>
           </apply>
           <apply>
             <times/>
             <ci>a</ci>
             <apply>
               <exp/>
               <apply>
                 <minus/>
                 <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3.82</cn>
               </apply>
             </apply>
           </apply>
		 </apply>
       </apply>
     </apply>
   </math>
 </component>
 
 <component name="L_CE">
   <variable initial_value="0.038" name="L_CE" public_interface="out" units="metre"/>
   <variable name="V_CE" public_interface="in" units="dimensionless"/>
   <variable name="time" public_interface="in" units="second"/>
   <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply>
       <eq/>
       <apply>
         <diff/>
         <bvar>
           <ci>time</ci>
         </bvar>
         <ci>L_CE</ci>
       </apply>
	   <apply>
         <times/>
		 <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="metre_per_second">1</cn>
         <ci>V_CE</ci>
	   </apply>
     </apply>
   </math>
 </component>
 
 <component name="L_SEE">
   <variable name="L_SEE" public_interface="out" units="metre"/>
   <variable name="L_m" public_interface="in" units="metre"/>
   <variable name="L_CE" public_interface="in" units="metre"/>
   <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply>
       <eq/>
       <ci>L_SEE</ci>
       <apply>
         <minus/>
         <ci>L_m</ci>
         <ci>L_CE</ci>
       </apply>
     </apply>
   </math>
 </component>
 
 <component name="L_m">
   <variable name="L_m" public_interface="out" units="metre"/>
   <variable name="time" public_interface="in" units="second"/>
   <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply>
       <eq/>
       <ci>L_m</ci>
       <piecewise>
         <piece>
           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="metre">0.038</cn>
           <apply>
             <leq/>
             <ci>time</ci>
             <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="second">1</cn>
           </apply>
         </piece>
         <piece>
           <apply>
             <plus/>
             <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="metre">0.038</cn>
             <apply>
               <times/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="metre_per_second">0.002</cn>
               <apply>
                 <minus/>
                 <ci>time</ci>
                 <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="second">1</cn>
               </apply>
             </apply>
           </apply>
           <apply>
             <and/>
             <apply>
               <gt/>
               <ci>time</ci>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="second">1</cn>
             </apply>
             <apply>
               <lt/>
               <ci>time</ci>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="second">2</cn>
             </apply>
           </apply>
         </piece>
         <otherwise>
           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="metre">0.04</cn>
         </otherwise>
       </piecewise>
     </apply>
   </math>
 </component>
 
 <connection>
   <map_components component_1="F_CE" component_2="f_L_CE"/>
   <map_variables variable_1="f_L_CE" variable_2="f_L_CE"/>
 </connection>
 <connection>
   <map_components component_1="F_CE" component_2="g_V_CE"/>
   <map_variables variable_1="g_V_CE" variable_2="g_V_CE"/>
 </connection>
 <connection>
   <map_components component_1="F_CE" component_2="user_defined_constants"/>
   <map_variables variable_1="a" variable_2="a"/>
 </connection>
 <connection>
   <map_components component_1="user_defined_constants" component_2="f_L_CE"/>
   <map_variables variable_1="F_max" variable_2="F_max"/>
   <map_variables variable_1="L_CE_opt" variable_2="L_CE_opt"/>
 </connection>
 <connection>
   <map_components component_1="L_CE" component_2="f_L_CE"/>
   <map_variables variable_1="L_CE" variable_2="L_CE"/>
 </connection>
 <connection>
   <map_components component_1="lambda_a" component_2="user_defined_constants"/>
   <map_variables variable_1="a" variable_2="a"/>
 </connection>
 <connection>
   <map_components component_1="g_V_CE" component_2="lambda_a"/>
   <map_variables variable_1="lambda_a" variable_2="lambda_a"/>
 </connection>
 <connection>
   <map_components component_1="V_CE" component_2="L_CE"/>
   <map_variables variable_1="V_CE" variable_2="V_CE"/>
   <map_variables variable_1="L_CE" variable_2="L_CE"/>
 </connection>
 <connection>
   <map_components component_1="g_V_CE" component_2="V_CE"/>
   <map_variables variable_1="V_CE" variable_2="V_CE"/>
   <map_variables variable_1="g_V_CE" variable_2="g_V_CE"/>
 </connection>
 <connection>
   <map_components component_1="g_V_CE" component_2="d1"/>
   <map_variables variable_1="d1" variable_2="d1"/>
 </connection>
 <connection>
   <map_components component_1="g_V_CE" component_2="d2"/>
   <map_variables variable_1="d2" variable_2="d2"/>
 </connection>
 <connection>
   <map_components component_1="g_V_CE" component_2="d3"/>
   <map_variables variable_1="d3" variable_2="d3"/>
 </connection>
 <connection>
   <map_components component_1="L_CE" component_2="L_SEE"/>
   <map_variables variable_1="L_CE" variable_2="L_CE"/>
 </connection>
 <connection>
   <map_components component_1="L_m" component_2="L_SEE"/>
   <map_variables variable_1="L_m" variable_2="L_m"/>
 </connection>
 <connection>
   <map_components component_1="F_SEE" component_2="L_SEE"/>
   <map_variables variable_1="L_SEE" variable_2="L_SEE"/>
 </connection>
 <connection>
   <map_components component_1="user_defined_constants" component_2="k_PEE"/>
   <map_variables variable_1="F_max" variable_2="F_max"/>
 </connection>
 <connection>
   <map_components component_1="F_PEE" component_2="k_PEE"/>
   <map_variables variable_1="k_PEE" variable_2="k_PEE"/>
 </connection>
 <connection>
   <map_components component_1="F_PEE" component_2="V_CE"/>
   <map_variables variable_1="F_PEE" variable_2="F_PEE"/>
 </connection>
 <connection>
   <map_components component_1="L_CE" component_2="environment"/>
   <map_variables variable_1="time" variable_2="time"/>
 </connection>
 <connection>
   <map_components component_1="V_CE" component_2="F_SEE"/>
   <map_variables variable_1="F_SEE" variable_2="F_SEE"/>
 </connection>
 <connection>
   <map_components component_1="V_CE" component_2="user_defined_constants"/>
   <map_variables variable_1="a" variable_2="a"/>
 </connection>
 <connection>
   <map_components component_1="F_m" component_2="F_SEE"/>
   <map_variables variable_1="F_SEE" variable_2="F_SEE"/>
 </connection>
 <connection>
   <map_components component_1="F_m" component_2="L_CE"/>
   <map_variables variable_1="L_CE" variable_2="L_CE"/>
 </connection>
 <connection>
   <map_components component_1="L_m" component_2="F_m"/>
   <map_variables variable_1="L_m" variable_2="L_m"/>
 </connection>
 <connection>
   <map_components component_1="environment" component_2="L_m"/>
   <map_variables variable_1="time" variable_2="time"/>
 </connection>
 <connection>
   <map_components component_1="V_CE" component_2="L_m"/>
   <map_variables variable_1="L_m" variable_2="L_m"/>
 </connection>
 <connection>
   <map_components component_1="F_PEE" component_2="L_CE"/>
   <map_variables variable_1="L_CE" variable_2="L_CE"/>
 </connection>
 <connection>
   <map_components component_1="f_L_CE" component_2="V_CE"/>
   <map_variables variable_1="f_L_CE" variable_2="f_L_CE"/>
 </connection>


<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#cba2d83a-5fec-4381-88b5-97e026e246aa">
    <rdf:li rdf:resource="rdf:#b20ced53-d88d-4c14-909c-bfddb792ff50"/>
    <rdf:li rdf:resource="rdf:#5bc61a08-5e09-401f-a8eb-38ad9a535da5"/>
    <rdf:li rdf:resource="rdf:#a679e6fb-d7ca-4796-8532-ee3b95ad12b2"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#32d10daf-9e19-4333-b3ba-7bcbe9f67e69">
    <vCard:Given>S.G.</vCard:Given>
    <vCard:Family>McLean</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fd59b2bf-7795-43ff-ad5a-4f23d11a1aa3">
    <dc:creator rdf:resource="rdf:#879c12b4-3186-472e-9621-fe9997a2a1cd"/>
    <rdf:value>This is a model for the Muscle-Tendon Dynamics for a knee joint loading problem. Each muscle-tendon unit in the model was modeled as a three-component Hill model. The contractile element was assumed to produce a force F_CE which depends on CE length, L_CE, CE lengthening velocity V_CE, and on active state a.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c7fd7497-c114-4bcb-9ff3-81b912b0dbb7">
    <dcterms:W3CDTF>2003-12-00 00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6ce47577-f425-4fd9-83bc-8800c19231e0">
    <vCard:Given>Paul</vCard:Given>
    <vCard:Family>Harrington</vCard:Family>
    <vCard:Other/>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher/>
    <cmeta:comment rdf:resource="rdf:#a5aa8b00-1c8f-4a68-ae64-7db40754deb2"/>
    <dcterms:created rdf:resource="rdf:#68c39463-1d6b-4f29-8796-24c18d0fc183"/>
    <dc:creator rdf:resource="rdf:#9607dcb5-4bd2-4203-b62a-e54f9d2e01b7"/>
    <cmeta:modification rdf:resource="rdf:#e641282f-6a55-41d2-95b4-b128b4aee3a6"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b20ced53-d88d-4c14-909c-bfddb792ff50">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#32d10daf-9e19-4333-b3ba-7bcbe9f67e69"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#879c12b4-3186-472e-9621-fe9997a2a1cd">
    <vCard:FN>Paul</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e641282f-6a55-41d2-95b4-b128b4aee3a6">
    <dcterms:modified rdf:resource="rdf:#da1b9a33-a0c0-40fe-9266-88b967b15b3c"/>
    <rdf:value>Corrected units and corrected a couple of equations - one to match the paper and one to correct the piecewise equation MathML.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#a69fee54-ac91-4fb9-a744-eb9ad314ae7f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a5aa8b00-1c8f-4a68-ae64-7db40754deb2">
    <dc:creator rdf:resource="rdf:#ad3a71fd-1597-4416-a7c0-810976534567"/>
    <rdf:value>The dimensional inconsistencies should now have been resolved</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a679e6fb-d7ca-4796-8532-ee3b95ad12b2">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#1dcb8bd8-7ad1-49cc-871b-9d100be16986"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#68c39463-1d6b-4f29-8796-24c18d0fc183">
    <dcterms:W3CDTF>2009-03-10T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ad3a71fd-1597-4416-a7c0-810976534567">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d1d305a9-2a63-48b1-8f6c-ce93c2f5bd7d">
    <bqs:Pubmed_id>14986412</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#6b7629c6-e025-4d29-8d12-8b571ea67f9d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6b7629c6-e025-4d29-8d12-8b571ea67f9d">
    <dc:creator rdf:resource="rdf:#cba2d83a-5fec-4381-88b5-97e026e246aa"/>
    <dc:title>Development and Validation of a 3-D Model to Predict Knee Joint Loading During Dynamic Movement</dc:title>
    <bqs:volume>125</bqs:volume>
    <bqs:first_page>864</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#602cbb01-52a8-4ab0-a3ef-a93d6290517f"/>
    <dcterms:issued rdf:resource="rdf:#c7fd7497-c114-4bcb-9ff3-81b912b0dbb7"/>
    <bqs:last_page>874</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#602cbb01-52a8-4ab0-a3ef-a93d6290517f">
    <dc:title>Transactions of the ASME</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#da1b9a33-a0c0-40fe-9266-88b967b15b3c">
    <dcterms:W3CDTF>2009-04-14T12:22:16+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5bc61a08-5e09-401f-a8eb-38ad9a535da5">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#20baaba0-3abd-4d6f-bee8-141a2141826e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1dcb8bd8-7ad1-49cc-871b-9d100be16986">
    <vCard:Given>A.J.</vCard:Given>
    <vCard:Family>van den Bogert</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8eba666c-fc64-4f9e-a7ba-f6ee21b4540f">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>paul.harrington@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a69fee54-ac91-4fb9-a744-eb9ad314ae7f">
    <vCard:N rdf:resource="rdf:#ac986121-f75d-4fde-b0b7-d5308bc1aa2e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ac986121-f75d-4fde-b0b7-d5308bc1aa2e">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#cf0c75fa-ac59-418e-ae4a-a7f0990db6ec">
    <vCard:Orgname>Auckland Bioengineering Institute</vCard:Orgname>
    <vCard:Orgunit/>
  </rdf:Description>
  <rdf:Description rdf:about="#mclean_2003">
    <bqs:reference rdf:resource="rdf:#d1d305a9-2a63-48b1-8f6c-ce93c2f5bd7d"/>
<bqs:reference rdf:parseType="Resource">
  <dc:subject rdf:parseType="Resource">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value>
      <rdf:Bag>
        <rdf:li>mechanical constitutive laws</rdf:li>
		<rdf:li>neuromuscular</rdf:li>
        <rdf:li>muscular skeletal</rdf:li>
      </rdf:Bag>
    </rdf:value>
  </dc:subject>
</bqs:reference>
    <cmeta:comment rdf:resource="rdf:#fd59b2bf-7795-43ff-ad5a-4f23d11a1aa3"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#20baaba0-3abd-4d6f-bee8-141a2141826e">
    <vCard:Given>A.</vCard:Given>
    <vCard:Family>Su</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9607dcb5-4bd2-4203-b62a-e54f9d2e01b7">
    <vCard:ORG rdf:resource="rdf:#cf0c75fa-ac59-418e-ae4a-a7f0990db6ec"/>
    <vCard:EMAIL rdf:resource="rdf:#8eba666c-fc64-4f9e-a7ba-f6ee21b4540f"/>
    <vCard:N rdf:resource="rdf:#6ce47577-f425-4fd9-83bc-8800c19231e0"/>
  </rdf:Description>
</rdf:RDF>
</model>