<?xml version="1.0" encoding="utf-8"?>

<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="nagano_2001" name="nagano_2001">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Effects of Neuromuscular Strength Training on Vertical Jumping Performance - A Computer Simulation Study</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
           This CellML model runs in OpenCell and COR to recreate the published results.  The units have been checked and they are consistent.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: The purpose of this study was twofold: (a) to systematically investigate the effect of altering specific neuromuscular parameters on maximum vertical jump height, and (b) to systematically investigate the effect of strengthening specific muscle groups on maximum vertical jump height. A two-dimensional musculoskeletal model which consisted of four rigid segments, three joints, and six Hill-type muscle models, representing the six major muscles and muscle groups in the lower extremity that contribute to jumping performance, was trained systematically. Maximum isometric muscle force, maximum muscle shortening velocity, and maximum muscle activation, which were manipulated to simulate the effects of strength training, all had substantial effects on jumping performance. Part of the increase in jumping performance could be explained solely by the interaction between the three neuromuscular parameters. It appeared that the most effective way to improve jumping performance was to train the knee extensors among all lower extremity muscles. For the model to fully benefit from any training effects of the neuromuscular system, it was necessary to continue to reoptimize the muscle coordination, in particular after the strength training sessions that focused on increasing maximum isometric muscle force. 
</para>

<para>
The original paper is cited below:
</para>

<para>Effects of Neuromuscular Strength Training on Vertical Jumping Performance - A Computer Simulation Study, Akinori Nagano and Karin G.M. Gerritsen, 2001, <emphasis>Journal of Applied Biomechanics</emphasis>, 17, 113-128. (there is no PubMed ID for this article). 
</para>

<informalfigure float="0" id="figure">
<mediaobject>
  <imageobject>
    <imagedata fileref="nagano_2001.png"/>
  </imageobject>
</mediaobject>
<caption>A two-component of skeletal muscle with the contractile element defined by Hill equations for concentric contraction.</caption>
</informalfigure>

</sect1>
</article>
</documentation>
  
  <units name="per_newton_second">
     <unit units="newton" exponent="-1"/>
     <unit units="second" exponent="-1"/>
  </units>
  <units name="metre_per_second">
     <unit units="metre"/>
     <unit units="second" exponent="-1"/>
  </units>
  <units name="metre2">
     <unit units="metre" exponent="2"/>
  </units>
  <units name="per_second">
     <unit units="second" exponent="-1"/>
  </units>
  <units name="newton_per_metre">
     <unit units="newton"/>
     <unit units="metre" exponent="-1"/>
  </units>
  <units name="newton_metre2">
     <unit units="newton"/>
     <unit units="metre" exponent="2"/>
  </units>
  
  <component name="environment">
     <variable name="time" units="second" public_interface="out"/>
  </component>
  
  <component name="contraction">
     <variable name="time" units="second" public_interface="in"/>
     <variable name="F_isom" units="newton"/>
     <variable name="c" units="newton"/>
     <variable name="L_ce" units="metre" initial_value="0.05"/>
     <variable name="L_ce_opt" units="metre" initial_value="0.055"/>
     <variable name="L" units="metre"/>
     <variable name="width" units="metre" initial_value="0.888"/>
     <variable name="Factor" units="per_second" initial_value="1"/>
     <variable name="A_REL" units="newton" initial_value="0.41"/>
     <variable name="B_REL" units="dimensionless" initial_value="5.2"/>
     <variable name="v_ce" units="metre_per_second"/>
     <variable name="F" units="newton"/>
     <variable name="F_max" units="newton" initial_value="3277.4"/>
     <variable name="q" units="dimensionless" initial_value="1"/>
     <variable name="c1" units="per_second"/>
     <variable name="c2" units="newton"/>
     <variable name="c3" units="per_newton_second"/>
     <variable name="slope" units="newton" initial_value="2"/>
     <variable name="F_asympt" units="dimensionless" initial_value="1.5"/>
     <variable name="L_see" units="metre"/>
     <variable name="L_slack" units="metre" initial_value="0.42"/>
     <variable name="alpha" units="newton_per_metre" initial_value="1449.027"/>
     <math xmlns="http://www.w3.org/1998/Math/MathML">
        <apply>
           <eq/>
           <ci>F_isom</ci>
           <apply>
              <plus/>
              <apply>
                 <minus/>
                 <apply>
                    <times/>
                    <ci>c</ci>
                    <apply>
                       <power/>
                       <apply>
                          <divide/>
                          <ci>L_ce</ci>
                          <ci>L_ce_opt</ci>
                       </apply>
                       <cn cellml:units="dimensionless">2</cn>
                    </apply>
                 </apply>
                 <apply>
                    <divide/>
                    <apply>
                       <times/>
                       <cn cellml:units="dimensionless">2</cn>
                       <ci>c</ci>
                       <ci>L_ce</ci>
                    </apply>
                    <ci>L_ce_opt</ci>
                 </apply>
              </apply>
              <ci>c</ci>
              <cn cellml:units="newton">1</cn>
           </apply>
        </apply>
        <apply>
           <eq/>
           <ci>v_ce</ci>
           <apply>
              <times/>
              <apply>
                 <minus/>
                 <ci>Factor</ci>
              </apply>
              <ci>L_ce</ci>
              <apply>
                 <minus/>
                 <apply>
                    <divide/>
                    <apply>
                       <times/>
                       <apply>
                          <plus/>
                          <ci>F_isom</ci>
                          <ci>A_REL</ci>
					   </apply>
                       <ci>B_REL</ci>
                    </apply>
                    <apply>
                       <plus/>
                       <apply>
                          <times/>
					      <cn cellml:units="newton">1</cn>
						  <apply>
                             <divide/>
                             <ci>F</ci>
                             <apply>
                                <times/>
                                <ci>F_max</ci>
                                <ci>q</ci>
                             </apply>
                          </apply>
					   </apply>
                       <ci>A_REL</ci>
                    </apply>
                 </apply>
                 <ci>B_REL</ci>
              </apply>
           </apply>
        </apply>
        <apply>
           <eq/>
           <ci>L_see</ci>
           <apply>
              <minus/>
              <ci>L</ci>
              <ci>L_ce</ci>
           </apply>
        </apply>
        <apply>
           <eq/>
           <ci>c</ci>
           <apply>
              <divide/>
              <apply>
                 <minus/>
                 <cn cellml:units="newton_metre2">1</cn>
              </apply>
              <apply>
                 <power/>
                 <ci>width</ci>
                 <cn cellml:units="dimensionless">2</cn>
              </apply>
           </apply>
        </apply>
        <apply>
           <eq/>
           <ci>c2</ci>
           <apply>
              <times/>
              <ci>F_isom</ci>
              <ci>F_asympt</ci>
           </apply>
        </apply>
        <apply>
           <eq/>
           <ci>c1</ci>
           <apply>
              <divide/>
              <apply>
                 <times/>
                 <ci>Factor</ci>
                 <ci>B_REL</ci>
                 <apply>
                    <power/>
                    <apply>
                       <plus/>
                       <ci>F_isom</ci>
                       <ci>c2</ci>
                    </apply>
                    <cn cellml:units="dimensionless">2</cn>
                 </apply>
              </apply>
              <apply>
                 <times/>
                 <apply>
                    <plus/>
                    <ci>F_isom</ci>
                    <ci>A_REL</ci>
                 </apply>
                 <ci>slope</ci>
              </apply>
           </apply>
        </apply>
        <apply>
           <eq/>
           <ci>c3</ci>
           <apply>
              <divide/>
              <ci>c1</ci>
              <apply>
                 <plus/>
                 <ci>F_isom</ci>
                 <ci>c2</ci>
              </apply>
           </apply>
        </apply>
        <apply>
           <eq/>
           <ci>L</ci>
           <piecewise>
              <piece>
                 <cn cellml:units="metre">1</cn>
                 <apply>
                    <leq/>
                    <ci>time</ci>
                    <cn cellml:units="second">1</cn>
                 </apply>
              </piece>
              <piece>
                 <cn cellml:units="metre">0.92</cn>
                 <apply>
                    <and/>
                    <apply>
                       <gt/>
                       <ci>time</ci>
                       <cn cellml:units="second">1</cn>
                    </apply>
                    <apply>
                       <lt/>
                       <ci>time</ci>
                       <cn cellml:units="second">5</cn>
                    </apply>
                 </apply>
              </piece>
              <otherwise>
                 <cn cellml:units="metre">0.9</cn>
              </otherwise>
           </piecewise>
        </apply>
        <apply>
           <eq/>
           <apply>
              <diff/>
              <bvar>
                 <ci>time</ci>
              </bvar>
              <ci>L_ce</ci>
           </apply>
           <ci>v_ce</ci>
        </apply>
        <apply>
           <eq/>
           <ci>F</ci>
           <apply>
              <times/>
              <ci>alpha</ci>
              <apply>
                 <minus/>
                 <ci>L_see</ci>
                 <ci>L_slack</ci>
              </apply>
           </apply>
        </apply>
     </math>
  </component>
  <connection>
     <map_components component_1="environment" component_2="contraction"/>
     <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
    
	<rdf:Description rdf:about="">
      <dc:creator rdf:parseType="Resource">
        <vCard:N rdf:parseType="Resource">
          <vCard:Family>Harrington</vCard:Family>
          <vCard:Given>Paul</vCard:Given>
		</vCard:N>
        <vCard:EMAIL rdf:parseType="Resource">
          <rdf:value>paul.harrington@auckland.ac.nz</rdf:value>
          <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
        </vCard:EMAIL>
        <vCard:ORG rdf:parseType="Resource">
          <vCard:Orgname>The University of Auckland</vCard:Orgname>
          <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
        </vCard:ORG>
      </dc:creator>
  
      <dcterms:created rdf:parseType="Resource">
        <dcterms:W3CDTF>2010-03-26</dcterms:W3CDTF>
      </dcterms:created>
    </rdf:Description>
    
    <rdf:Description rdf:about="#nagano_2001">
      <cmeta:bio_entity>skeletal muscle</cmeta:bio_entity>
	  
      <bqs:reference rdf:parseType="Resource">
        <dc:subject rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>mechanical constitutive laws</rdf:li>
			  <rdf:li>skeletal muscle</rdf:li>
			  <rdf:li>muscle contraction</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>

      <bqs:reference rdf:parseType="Resource">
        <bqs:JournalArticle rdf:parseType="Resource">
          <dc:creator>
            <rdf:Seq>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Nagano</vCard:Family>
                    <vCard:Given>Akinori</vCard:Given>
			      </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Gerritsen</vCard:Family>
                    <vCard:Given>Karin</vCard:Given>
					<vCard:Other>G</vCard:Other>
					<vCard:Other>M</vCard:Other>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
            </rdf:Seq>
          </dc:creator>
          <dc:title>
            Effects of Neuromuscular Strength Training on Vertical Jumping Performance - A Computer Simulation Study
          </dc:title>
          <dcterms:issued rdf:parseType="Resource">
            <dcterms:W3CDTF>2001</dcterms:W3CDTF>
          </dcterms:issued>
          <bqs:Journal rdf:parseType="Resource">
            <dc:title>Journal of Applied Biomechanics</dc:title>
          </bqs:Journal>
		  <bqs:volume>17</bqs:volume>
          <bqs:first_page>113</bqs:first_page>
          <bqs:last_page>128</bqs:last_page>
        </bqs:JournalArticle>
      </bqs:reference>
    </rdf:Description>
  </rdf:RDF>
</model>