<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  tangent_law_1991.xml

CREATED :  1st July 2003

LAST MODIFIED : 1st July 2003

AUTHOR :  Holger Schmid
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of the Taylor series expansion of the Tangent Law, defining the relation between the six independent strain components and the stress components.

CHANGES:
18/02/04 - CML - Completed the Metadata.  
  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="Tangent" name="schmid_2006">
    
  
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>The Taylor Series Expansion of the Tangent Law</title>
  <author>
    <firstname>Holger</firstname>
          <surname>Schmid</surname>

    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
    This CellML model was implemented in a manner that could be used for performing finite element model simulations on the CMISS software program developed at the Auckland Bioengineering Institute, The University of Auckland.
    </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: The study of ventricular mechanics-analyzing the distribution of strain and stress in myocardium throughout the cardiac cycle-is crucially dependent on the accuracy of the constitutive law chosen to represent the highly nonlinear and anisotropic properties of passive cardiac muscle. A number of such laws have been proposed and fitted to experimental measurements of stress-strain behavior. Here we examine five of these laws and compare them on the basis of (i) "goodness of fit:" How well they fit a set of six shear deformation tests, (ii) "determinability:" How well determined the objective function is at the optimal parameter fit, and (iii) "variability:" How well determined the material parameters are over the range of experiments. These criteria are utilized to discuss the advantages and disadvantages of the constitutive laws.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Myocardial Material Parameter Estimation - A Comparative Study for Simple Shear, H. Schmid, M. P. Nash, A. A. Young and P. J. Hunter, 2006. <emphasis>Journal of Biomechanical Engineering</emphasis>, 128(5), 742-750.  <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/16995761">PubMed ID: 16995761</ulink>  </para>

</sect1>
</article>
</documentation>


  <!-- Global units -->
  <units name="strain">
    <unit units="dimensionless"/>
  </units>
  <units name="stress">
    <unit units="dimensionless"/>
  </units>

  <component cmeta:id="interface" name="interface">

    
  
    <!-- Variables we expect to be set/controlled externally -->
    <variable units="strain" private_interface="out" name="E11"/>
    <variable units="strain" private_interface="out" name="E22"/>
    <variable units="strain" private_interface="out" name="E33"/>
    <variable units="strain" private_interface="out" name="E12"/>
    <variable units="strain" private_interface="out" name="E13"/>
    <variable units="strain" private_interface="out" name="E23"/>
    <variable units="strain" private_interface="out" name="aff" initial_value="0"/>
    <variable units="strain" private_interface="out" name="afn" initial_value="0"/>
    <variable units="strain" private_interface="out" name="afs" initial_value="0"/>
    <variable units="strain" private_interface="out" name="ann" initial_value="0"/>
    <variable units="strain" private_interface="out" name="ans" initial_value="0"/>
    <variable units="strain" private_interface="out" name="ass" initial_value="0"/>
    <variable units="strain" private_interface="out" name="bff" initial_value="0"/>
    <variable units="strain" private_interface="out" name="bfn" initial_value="0"/>
    <variable units="strain" private_interface="out" name="bfs" initial_value="0"/>
    <variable units="strain" private_interface="out" name="bnn" initial_value="0"/>
    <variable units="strain" private_interface="out" name="bns" initial_value="0"/>
    <variable units="strain" private_interface="out" name="bss" initial_value="0"/>
        
    <!-- Variables we want to make available externally -->
    <variable units="stress" public_interface="out" private_interface="in" name="Tdev11"/>
    <variable units="stress" public_interface="out" private_interface="in" name="Tdev22"/>
    <variable units="stress" public_interface="out" private_interface="in" name="Tdev33"/>
    <variable units="stress" public_interface="out" private_interface="in" name="Tdev12"/>
    <variable units="stress" public_interface="out" private_interface="in" name="Tdev13"/>
    <variable units="stress" public_interface="out" private_interface="in" name="Tdev23"/>

  </component> <!--interface-->

  <component cmeta:id="equations" name="equations">

    

    <!-- Inputs -->
    <variable units="strain" public_interface="in" name="E11"/>
    <variable units="strain" public_interface="in" name="E22"/>
    <variable units="strain" public_interface="in" name="E33"/>
    <variable units="strain" public_interface="in" name="E12"/>
    <variable units="strain" public_interface="in" name="E13"/>
    <variable units="strain" public_interface="in" name="E23"/>
    <variable units="strain" public_interface="in" name="aff"/>
    <variable units="strain" public_interface="in" name="afn"/>
    <variable units="strain" public_interface="in" name="afs"/>
    <variable units="strain" public_interface="in" name="ann"/>
    <variable units="strain" public_interface="in" name="ans"/>
    <variable units="strain" public_interface="in" name="ass"/>
    <variable units="strain" public_interface="in" name="bff"/>
    <variable units="strain" public_interface="in" name="bfn"/>
    <variable units="strain" public_interface="in" name="bfs"/>
    <variable units="strain" public_interface="in" name="bnn"/>
    <variable units="strain" public_interface="in" name="bns"/>
    <variable units="strain" public_interface="in" name="bss"/>
    
    <!-- Outputs computed here -->
    <variable units="stress" public_interface="out" name="Tdev11"/>
    <variable units="stress" public_interface="out" name="Tdev22"/>
    <variable units="stress" public_interface="out" name="Tdev33"/>
    <variable units="stress" public_interface="out" name="Tdev12"/>
    <variable units="stress" public_interface="out" name="Tdev13"/>
    <variable units="stress" public_interface="out" name="Tdev23"/>

    <!-- Calculation of Stress -->
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdev11_calculation_eq">
      <apply id="Tdev11_calculation">
        <eq/>
        <ci>Tdev11</ci>
        <apply>
          <times/>
        <ci>aff</ci>
            <apply>
            <plus/>
                <!-- 1st order -->
                <apply>
              <times/>
                    <ci>bff</ci>
                    <ci>E11</ci> 
                </apply>
                <!-- 3rd order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">1</cn>
                        <cn cellml:units="strain">3</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bff</ci>
                            <ci>E11</ci> 
                        </apply>
                        <cn cellml:units="strain">3</cn>
                    </apply>
                </apply> 
                <!-- 5th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">2</cn>
                        <cn cellml:units="strain">15</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bff</ci>
                            <ci>E11</ci> 
                        </apply>
                        <cn cellml:units="strain">5</cn>
                    </apply>
                </apply>
                <!-- 7th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">17</cn>
                        <cn cellml:units="strain">315</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bff</ci>
                            <ci>E11</ci> 
                        </apply>
                        <cn cellml:units="strain">7</cn>
                    </apply>
                </apply>
                <!-- 9th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">62</cn>
                        <cn cellml:units="strain">2835</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bff</ci>
                            <ci>E11</ci> 
                        </apply>
                        <cn cellml:units="strain">9</cn>
                    </apply>
                </apply>
                <!-- END -->
            </apply>
        </apply>
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdev22_calculation_eq">
      <apply id="Tdev22_calculation">
        <eq/>
        <ci>Tdev22</ci>
        <apply>
          <times/>
        <ci>ass</ci>
            <apply>
            <plus/>
                <!-- 1st order -->
                <apply>
              <times/>
                    <ci>bss</ci>
                    <ci>E22</ci> 
                </apply>
                <!-- 3rd order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">1</cn>
                        <cn cellml:units="strain">3</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bss</ci>
                            <ci>E22</ci> 
                        </apply>
                        <cn cellml:units="strain">3</cn>
                    </apply>
                </apply> 
                <!-- 5th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">2</cn>
                        <cn cellml:units="strain">15</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bss</ci>
                            <ci>E22</ci> 
                        </apply>
                        <cn cellml:units="strain">5</cn>
                    </apply>
                </apply>
                <!-- 7th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">17</cn>
                        <cn cellml:units="strain">315</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bss</ci>
                            <ci>E22</ci> 
                        </apply>
                        <cn cellml:units="strain">7</cn>
                    </apply>
                </apply>
                <!-- 9th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">62</cn>
                        <cn cellml:units="strain">2835</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bss</ci>
                            <ci>E22</ci> 
                        </apply>
                        <cn cellml:units="strain">9</cn>
                    </apply>
                </apply>
                <!-- END -->
            </apply>
        </apply>
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdev33_calculation_eq">
      <apply id="Tdev33_calculation">
        <eq/>
        <ci>Tdev33</ci>
        <apply>
          <times/>
        <ci>ann</ci>
            <apply>
            <plus/>
                <!-- 1st order -->
                <apply>
              <times/>
                    <ci>bnn</ci>
                    <ci>E33</ci> 
                </apply>
                <!-- 3rd order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">1</cn>
                        <cn cellml:units="strain">3</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bnn</ci>
                            <ci>E33</ci> 
                        </apply>
                        <cn cellml:units="strain">3</cn>
                    </apply>
                </apply> 
                <!-- 5th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">2</cn>
                        <cn cellml:units="strain">15</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bnn</ci>
                            <ci>E33</ci> 
                        </apply>
                        <cn cellml:units="strain">5</cn>
                    </apply>
                </apply>
                <!-- 7th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">17</cn>
                        <cn cellml:units="strain">315</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bnn</ci>
                            <ci>E33</ci> 
                        </apply>
                        <cn cellml:units="strain">7</cn>
                    </apply>
                </apply>
                <!-- 9th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">62</cn>
                        <cn cellml:units="strain">2835</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bnn</ci>
                            <ci>E33</ci> 
                        </apply>
                        <cn cellml:units="strain">9</cn>
                    </apply>
                </apply>
                <!-- END -->
            </apply>
        </apply>
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdev12_calculation_eq">
      <apply id="Tdev12_calculation">
        <eq/>
        <ci>Tdev12</ci>
        <apply>
          <times/>
        <ci>afs</ci>
            <apply>
            <plus/>
                <!-- 1st order -->
                <apply>
              <times/>
                    <ci>bfs</ci>
                    <ci>E12</ci> 
                </apply>
                <!-- 3rd order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">1</cn>
                        <cn cellml:units="strain">3</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bfs</ci>
                            <ci>E12</ci> 
                        </apply>
                        <cn cellml:units="strain">3</cn>
                    </apply>
                </apply> 
                <!-- 5th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">2</cn>
                        <cn cellml:units="strain">15</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bfs</ci>
                            <ci>E12</ci> 
                        </apply>
                        <cn cellml:units="strain">5</cn>
                    </apply>
                </apply>
                <!-- 7th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">17</cn>
                        <cn cellml:units="strain">315</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bfs</ci>
                            <ci>E12</ci> 
                        </apply>
                        <cn cellml:units="strain">7</cn>
                    </apply>
                </apply>
                <!-- 9th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">62</cn>
                        <cn cellml:units="strain">2835</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bfs</ci>
                            <ci>E12</ci> 
                        </apply>
                        <cn cellml:units="strain">9</cn>
                    </apply>
                </apply>
                <!-- END -->
            </apply>
        </apply>
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdev13_calculation_eq">
      <apply id="Tdev13_calculation">
        <eq/>
        <ci>Tdev13</ci>
        <apply>
          <times/>
        <ci>afn</ci>
            <apply>
            <plus/>
                <!-- 1st order -->
                <apply>
              <times/>
                    <ci>bfn</ci>
                    <ci>E13</ci> 
                </apply>
                <!-- 3rd order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">1</cn>
                        <cn cellml:units="strain">3</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bfn</ci>
                            <ci>E13</ci> 
                        </apply>
                        <cn cellml:units="strain">3</cn>
                    </apply>
                </apply> 
                <!-- 5th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">2</cn>
                        <cn cellml:units="strain">15</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bfn</ci>
                            <ci>E13</ci> 
                        </apply>
                        <cn cellml:units="strain">5</cn>
                    </apply>
                </apply>
                <!-- 7th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">17</cn>
                        <cn cellml:units="strain">315</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bfn</ci>
                            <ci>E13</ci> 
                        </apply>
                        <cn cellml:units="strain">7</cn>
                    </apply>
                </apply>
                <!-- 9th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">62</cn>
                        <cn cellml:units="strain">2835</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bfn</ci>
                            <ci>E13</ci> 
                        </apply>
                        <cn cellml:units="strain">9</cn>
                    </apply>
                </apply>
                <!-- END -->
            </apply>
        </apply>
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdev23_calculation_eq">
      <apply id="Tdev23_calculation">
        <eq/>
        <ci>Tdev23</ci>
        <apply>
          <times/>
        <ci>ans</ci>
            <apply>
            <plus/>
                <!-- 1st order -->
                <apply>
              <times/>
                    <ci>bns</ci>
                    <ci>E23</ci> 
                </apply>
                <!-- 3rd order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">1</cn>
                        <cn cellml:units="strain">3</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bns</ci>
                            <ci>E23</ci> 
                        </apply>
                        <cn cellml:units="strain">3</cn>
                    </apply>
                </apply> 
                <!-- 5th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">2</cn>
                        <cn cellml:units="strain">15</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bns</ci>
                            <ci>E23</ci> 
                        </apply>
                        <cn cellml:units="strain">5</cn>
                    </apply>
                </apply>
                <!-- 7th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">17</cn>
                        <cn cellml:units="strain">315</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bns</ci>
                            <ci>E23</ci> 
                        </apply>
                        <cn cellml:units="strain">7</cn>
                    </apply>
                </apply>
                <!-- 9th order -->
                <apply>
              <times/>
                    <apply>
                <divide/>
                        <cn cellml:units="strain">62</cn>
                        <cn cellml:units="strain">2835</cn>
                    </apply>
                    <apply>
                <power/>
                        <apply>
                  <times/>
                            <ci>bns</ci>
                            <ci>E23</ci> 
                        </apply>
                        <cn cellml:units="strain">9</cn>
                    </apply>
                </apply>
                <!-- END -->
            </apply>
        </apply>
      </apply>
    </math>

  </component>
  <!--membrane-->

  <connection>
    <map_components component_2="equations" component_1="interface"/>
    <map_variables variable_2="E11" variable_1="E11"/>
    <map_variables variable_2="E22" variable_1="E22"/>
    <map_variables variable_2="E33" variable_1="E33"/>
    <map_variables variable_2="E12" variable_1="E12"/>
    <map_variables variable_2="E13" variable_1="E13"/>
    <map_variables variable_2="E23" variable_1="E23"/>
    <map_variables variable_2="Tdev11" variable_1="Tdev11"/>
    <map_variables variable_2="Tdev22" variable_1="Tdev22"/>
    <map_variables variable_2="Tdev33" variable_1="Tdev33"/>
    <map_variables variable_2="Tdev12" variable_1="Tdev12"/>
    <map_variables variable_2="Tdev13" variable_1="Tdev13"/>
    <map_variables variable_2="Tdev23" variable_1="Tdev23"/>
    <map_variables variable_2="aff" variable_1="aff"/>
    <map_variables variable_2="afn" variable_1="afn"/>
    <map_variables variable_2="afs" variable_1="afs"/>
    <map_variables variable_2="ann" variable_1="ann"/>
    <map_variables variable_2="ans" variable_1="ans"/>
    <map_variables variable_2="ass" variable_1="ass"/>
    <map_variables variable_2="bff" variable_1="bff"/>
    <map_variables variable_2="bfn" variable_1="bfn"/>
    <map_variables variable_2="bfs" variable_1="bfs"/>
    <map_variables variable_2="bnn" variable_1="bnn"/>
    <map_variables variable_2="bns" variable_1="bns"/>
    <map_variables variable_2="bss" variable_1="bss"/>
  </connection>
  
  <group>
    <relationship_ref relationship="encapsulation"/>
    <component_ref component="interface">
      <component_ref component="equations"/>
    </component_ref>
  </group>







<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#9920f12b-4aa1-401d-81a0-929a42b42243">
    <rdf:li rdf:resource="rdf:#4f5a9ee4-7c52-481b-b0ef-21010e839fc2"/>
    <rdf:li rdf:resource="rdf:#69059ab1-1387-4a04-9419-52d1ff37c978"/>
    <rdf:li rdf:resource="rdf:#81eaa51d-1059-4691-bb88-977f878fd923"/>
    <rdf:li rdf:resource="rdf:#90651551-6cb9-4f69-b0d6-33e01618acfe"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#e010ab9b-1428-46f1-a264-2f572dac4921">
    <vCard:FN>Vignesh Kumar</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:title>Myocardial Material Parameter Estimation - A Comparative Study for Simple Shear (Taylor Series Expansion of the Tangent Law)</dc:title>
    <dc:publisher>Auckland Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#0135fcc9-d708-4e22-aa3a-486f468bb985"/>
    <dcterms:created rdf:resource="rdf:#585ba385-3b15-4c60-b143-0319e1d71c30"/>
    <dc:creator rdf:resource="rdf:#0f4ab691-7ed8-469e-bf6b-33848837d039"/>
    <cmeta:modification rdf:resource="rdf:#fe4404d5-d1dd-46dd-912d-ebf7fb98ad60"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#faa9e00f-8285-42e1-a58e-6ae319f92afa">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>h.schmid@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3f2c22f0-64d5-4270-a4c4-4818e5db6396">
    <rdf:value>
            We'll use this component as the "interface" to the model, all 
            other components are hidden via encapsulation in this component.
          </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="#interface">
    <cmeta:comment rdf:resource="rdf:#3f2c22f0-64d5-4270-a4c4-4818e5db6396"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#63bd398d-67fe-485a-996e-a08014602bf6">
    <bqs:Pubmed_id>16995761</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#edbb0a72-e609-490a-a972-1e4b13449211"/>
  </rdf:Description>
  <rdf:Description rdf:about="#Tangent">
    <bqs:reference rdf:resource="rdf:#19ea753c-a022-425c-be0f-c39bbca9d1d2"/>
    <bqs:reference rdf:resource="rdf:#63bd398d-67fe-485a-996e-a08014602bf6"/>
    <cmeta:comment rdf:resource="rdf:#eab6e4fc-e864-4b12-bbfc-d682e0dc5d17"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0135fcc9-d708-4e22-aa3a-486f468bb985">
    <dc:creator rdf:resource="rdf:#e010ab9b-1428-46f1-a264-2f572dac4921"/>
    <rdf:value>This file contains a CellML description of the Taylor series expansion of the Tangent Law, defining the relation between the six independent strain components and the stress components.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fe4404d5-d1dd-46dd-912d-ebf7fb98ad60">
    <dcterms:modified rdf:resource="rdf:#715df17f-ead9-4d0b-b1ae-5bf26bf11bfd"/>
    <rdf:value>Updated documentation</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#e8ccc2e0-c663-4c48-aaa2-5f35dfe722ab"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#be7b5494-0b8d-46c1-ae5c-e078f99ed234">
    <dcterms:W3CDTF>2003-12-28</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#edbb0a72-e609-490a-a972-1e4b13449211">
    <dc:creator rdf:resource="rdf:#9920f12b-4aa1-401d-81a0-929a42b42243"/>
    <dc:title>Myocardial Material Parameter Estimation - A Comparative Study for Simple Shear</dc:title>
    <bqs:volume>128(5)</bqs:volume>
    <bqs:first_page>742</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#cfd782bc-d053-4d74-95dd-a93ac8036b75"/>
    <dcterms:issued rdf:resource="rdf:#9f536949-e785-450c-89aa-3812e744c5ff"/>
    <bqs:last_page>750</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#38fb7f54-26c1-4f38-99f2-810e3c6584d6">
    <vCard:Given>Holger</vCard:Given>
    <vCard:Family>Schmid</vCard:Family>
    <vCard:Other/>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dcterms:created rdf:resource="rdf:#be7b5494-0b8d-46c1-ae5c-e078f99ed234"/>
    <dc:creator rdf:resource="rdf:#e7c89cdf-6bb0-46e3-a9a7-00f4c2e63047"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6078f473-964c-4c9d-93b4-c72b6dd252dc">
    <vCard:Given>P</vCard:Given>
    <vCard:Family>Hunter</vCard:Family>
    <vCard:Other>J</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e4829a26-7ce9-4e60-95d5-e73482a4b348">
    <dcterms:W3CDTF>2004-02-18</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3e8884cb-8235-47af-875b-1c5af10c93d8">
    <vCard:N rdf:resource="rdf:#e102e6e7-2056-4eac-93a1-fa4679056cc5"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#14a39fd9-935e-48b0-aa3a-445afbeef6da">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>h.schmid@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7dcc2646-fc15-4c0d-bf3e-b4bf39c3561d">
    <vCard:Given>A</vCard:Given>
    <vCard:Family>Young</vCard:Family>
    <vCard:Other>A</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1ad97bec-06ac-4334-931e-6c924d186116">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#585ba385-3b15-4c60-b143-0319e1d71c30">
    <dcterms:W3CDTF>2003-07-01T00:00:00+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1a1dbcfc-9391-4323-b1a2-218fa4b30786">
    <vCard:Given>M</vCard:Given>
    <vCard:Family>Nash</vCard:Family>
    <vCard:Other>P</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e102e6e7-2056-4eac-93a1-fa4679056cc5">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>M</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e8ccc2e0-c663-4c48-aaa2-5f35dfe722ab">
    <vCard:N rdf:resource="rdf:#73e77a38-e951-4227-a3ca-be372da37bb0"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#69059ab1-1387-4a04-9419-52d1ff37c978">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#1a1dbcfc-9391-4323-b1a2-218fa4b30786"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d97ba06e-ef1c-48d5-829b-1543e1e8049f">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#19ea753c-a022-425c-be0f-c39bbca9d1d2">
    <dc:subject rdf:resource="rdf:#83ca2e33-0e1b-4a9b-aea3-c7c680320700"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e7c89cdf-6bb0-46e3-a9a7-00f4c2e63047">
    <vCard:ORG rdf:resource="rdf:#1ad97bec-06ac-4334-931e-6c924d186116"/>
    <vCard:EMAIL rdf:resource="rdf:#faa9e00f-8285-42e1-a58e-6ae319f92afa"/>
    <vCard:N rdf:resource="rdf:#65a12a5c-b94a-4f30-9498-edd6e041ecdf"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#715df17f-ead9-4d0b-b1ae-5bf26bf11bfd">
    <dcterms:W3CDTF>2007-12-05T13:49:01+13:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fa6a7584-bdfd-407a-9128-13eb1af85592">
    <rdf:value>
            In this simple model we only have one component, which holds the
            six equations.
          </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#cdd5c56c-ce96-49e5-af2d-62644a4241c6">
    <dcterms:modified rdf:resource="rdf:#e4829a26-7ce9-4e60-95d5-e73482a4b348"/>
    <rdf:value>
          Added metadata to the model.
        </rdf:value>
    <rdf:type rdf:resource="http://www.cellml.org/metadata/1.0#modification"/>
    <cmeta:modifier rdf:resource="rdf:#3e8884cb-8235-47af-875b-1c5af10c93d8"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d7de592c-5962-4c80-bd0d-fe30147113e9">
    <vCard:Given>H</vCard:Given>
    <vCard:Family>Schmid</vCard:Family>
    <vCard:Other/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#81eaa51d-1059-4691-bb88-977f878fd923">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#7dcc2646-fc15-4c0d-bf3e-b4bf39c3561d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fdc97d7e-d815-4e1e-96ce-0da4bf02bfdd">
    <vCard:FN>Vignesh Kumar</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0f4ab691-7ed8-469e-bf6b-33848837d039">
    <vCard:ORG rdf:resource="rdf:#d97ba06e-ef1c-48d5-829b-1543e1e8049f"/>
    <vCard:EMAIL rdf:resource="rdf:#14a39fd9-935e-48b0-aa3a-445afbeef6da"/>
    <vCard:N rdf:resource="rdf:#38fb7f54-26c1-4f38-99f2-810e3c6584d6"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#cfd782bc-d053-4d74-95dd-a93ac8036b75">
    <dc:title>Journal of Biomechanical Engineering</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#83ca2e33-0e1b-4a9b-aea3-c7c680320700">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value>
      <rdf:Bag>
        <rdf:li>tangent law</rdf:li>
        <rdf:li>mechanical constitutive laws</rdf:li>
        <rdf:li>cardiac mechanics</rdf:li>
        <rdf:li>constitutive material law</rdf:li>
      </rdf:Bag>
    </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#65a12a5c-b94a-4f30-9498-edd6e041ecdf">
    <vCard:Given>Holger</vCard:Given>
    <vCard:Family>Schmid</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="#equations">
    <cmeta:comment rdf:resource="rdf:#fa6a7584-bdfd-407a-9128-13eb1af85592"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#90651551-6cb9-4f69-b0d6-33e01618acfe">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#6078f473-964c-4c9d-93b4-c72b6dd252dc"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#eab6e4fc-e864-4b12-bbfc-d682e0dc5d17">
    <dc:creator rdf:resource="rdf:#fdc97d7e-d815-4e1e-96ce-0da4bf02bfdd"/>
    <rdf:value>This is a CellML version of the Tangent constitutive material law,&#13;
defining the relation between the six independent strain components&#13;
and the stress components. It is assumed that the strain components&#13;
will be controlled externally by the application using this CellML&#13;
model.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4f5a9ee4-7c52-481b-b0ef-21010e839fc2">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#d7de592c-5962-4c80-bd0d-fe30147113e9"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#73e77a38-e951-4227-a3ca-be372da37bb0">
    <vCard:Given>Vignesh</vCard:Given>
    <vCard:Family>Kumar</vCard:Family>
    <vCard:Other/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9f536949-e785-450c-89aa-3812e744c5ff">
    <dcterms:W3CDTF>2006-10-01 00:00</dcterms:W3CDTF>
  </rdf:Description>
</rdf:RDF>
</model>
