// publisher: The University of Auckland, Auckland Bioengineering Institute
// comment: FN Catherine Lloyd; This CellML model runs in both PCENv and COR. The units have been checked and are consistent and correct. Unfortunately this version of the CellML model does not recreate the published results of the original model. We are unsure why as the full set of equations and parameters are included and the simulation tools produce no error messages.
// created: W3CDTF 2003-08-14T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2007-12-31T13:57:28+13:00; Corrected a couple of equations and fixed some units.; Given Catherine; Family Lloyd; Other May
// publisher: The University of Auckland, Auckland Bioengineering Institute
// created: W3CDTF 2003-08-14
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: Aon and Cortassa's 2002 mathematical model of a metabolic network.
// comment: FN Catherine Lloyd; This is the CellML description of Aon and Cortassa's 2002 mathematical model of a metabolic network.
// reference: Pubmed_id 12050011; Given M; Family Aon; Other A; Given S; Family Cortassa; title Coherent and robust modulation of a metabolic network by cytoskeletal organization and dynamics; volume 97; first_page 213; title Biophysical Chemistry; W3CDTF 2002-06-19; last_page 231
// reference: subject_type keyword; metabolism; glycolysis; pentose phosphate pathway
def model aon_2002 as
  // Modulation of a Metabolic Network by Cytoskeletal Organisation and Dynamics
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both OpenCell and COR. The units have been checked and they are consistent. The CellML model "may" replicate the published results - there are no simple results figures plotting substrate concentration against time in the paper. Neither are there any simple figures showing the results of the "standard" model (certain variables are altered in order to generate the figures as described in the figure captions). The model appears to be very sensitive to the initial conditions (concentrations) of the substrates in the pathway. Where these values have not been specified in the paper they have been set to 0.01.
  //
  // Model Structure
  //
  // ABSTRACT: In order to investigate the influence of cytoskeletal organization and dynamics on cellular biochemistry, a mathematical model was formulated based on our own experimental evidence. The model couples microtubular protein (MTP) dynamics to the glycolytic pathway and its branches: the Krebs cycle, ethanolic fermentation, and the pentose phosphate (PP) pathway. Results show that the flux through glycolysis coherently and coordinately increases or decreases with increased or decreased levels of polymerized MTP, respectively. The rates of individual enzymatic steps and metabolite concentrations change with the polymeric status of MTP throughout the metabolic network. Negative control is exerted by the PP pathway on the glycolytic flux, and the extent of inhibition depends inversely on the polymerization state of MTP, i.e. a high degree of polymerization relieves the negative control. The stability of the model's steady state dynamics for a wide range of variation of metabolic parameters increased with the degree of polymerized MTP. The findings indicate that the organization of the cytoskeleton bestows coherence and robustness to the coordination of cellular metabolism.
  //
  // The original paper reference is cited below:
  //
  // Coherent and robust modulation of a metabolic network by cytoskeletal organization and dynamics, Miguel A. Aon and Sonia Cortassa, 2002, Biophysical Chemistry, 97, 213-231. PubMed ID: 12050011 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=12050011&dopt=Abstract)
  //
  // reaction diagram
  //
  // A schematic diagram of the metabolic network, the cycle of assembly-disassembly of microtubular proteins, and their interactions, upon which the Aon-Cortassa model is based.
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit flux as
    unit millimolar;
    unit minute {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit millimolar {expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit third_order_rate_constant as
    unit millimolar {expo: -2};
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  def comp G_o as
    var G_o: millimolar {pub: out, init: 1};
  enddef;

  def comp G as
    var G: millimolar {pub: out, init: 0.01};
    var V_IN: flux {pub: in};
    var V_HK: flux {pub: in};
    var time: minute {pub: in};
    ode(G, time) = V_IN-V_HK;
  enddef;

  def comp G6P as
    var G6P: millimolar {pub: out, init: 0.01};
    var V_PFK: flux {pub: in};
    var V_HK: flux {pub: in};
    var V_G6PDH: flux {pub: in};
    var time: minute {pub: in};
    ode(G6P, time) = V_HK-(V_PFK+V_G6PDH);
  enddef;

  def comp FDP as
    var FDP: millimolar {pub: out, init: 0.01};
    var V_PFK: flux {pub: in};
    var V_ALD: flux {pub: in};
    var time: minute {pub: in};
    ode(FDP, time) = V_PFK-V_ALD;
  enddef;

  def comp G3P as
    var G3P: millimolar {pub: out, init: 0.01};
    var V_GAPDH: flux {pub: in};
    var V_ALD: flux {pub: in};
    var time: minute {pub: in};
    ode(G3P, time) = 2{dimensionless}*V_ALD-V_GAPDH;
  enddef;

  def comp DPG as
    var DPG: millimolar {pub: out, init: 0.01};
    var V_PGK: flux {pub: in};
    var V_GAPDH: flux {pub: in};
    var time: minute {pub: in};
    ode(DPG, time) = V_GAPDH-V_PGK;
  enddef;

  def comp PEP as
    var PEP: millimolar {pub: out, init: 0.01};
    var V_PGK: flux {pub: in};
    var V_PK: flux {pub: in};
    var time: minute {pub: in};
    ode(PEP, time) = V_PGK-V_PK;
  enddef;

  def comp Py as
    var Py: millimolar {pub: out, init: 0.01};
    var V_PK: flux {pub: in};
    var V_TCA: flux {pub: in};
    var V_ADH: flux {pub: in};
    var time: minute {pub: in};
    ode(Py, time) = V_PK-(V_TCA+V_ADH);
  enddef;

  def comp ATP as
    var ATP: millimolar {pub: out, init: 1.4};
    var PO: dimensionless {init: 4};
    var V_HK: flux {pub: in};
    var V_PFK: flux {pub: in};
    var V_PGK: flux {pub: in};
    var V_PK: flux {pub: in};
    var V_TCA: flux {pub: in};
    var V_ATPase: flux {pub: in};
    var time: minute {pub: in};
    ode(ATP, time) = V_PGK+V_PK+PO*V_TCA-(V_HK+V_PFK+V_ATPase);
  enddef;

  def comp ADP as
    var ADP: millimolar {pub: out};
    var Cn: millimolar {init: 9};
    var AMP: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    ADP = Cn-(ATP+AMP);
  enddef;

  def comp AMP as
    var AMP: millimolar {pub: out, init: 0.5};
  enddef;

  def comp GTP as
    var GTP: millimolar {pub: out, init: 0.95};
  enddef;

  def comp GDP as
    var GDP: millimolar {pub: out, init: 0.05};
  enddef;

  def comp H as
    var H: millimolar {pub: out, init: 3.2e-8};
  enddef;

  def comp NADP as
    var NADP: millimolar {pub: out, init: 1};
  enddef;

  def comp NADH as
    var NADH: millimolar {pub: out, init: 0.01};
  enddef;

  def comp NAD as
    var NAD: millimolar {pub: out, init: 1};
  enddef;

  def comp CD as
    var CD: millimolar {pub: out};
    var CMTP: millimolar {init: 0.9};
    var CT: millimolar {pub: in};
    var CP: millimolar {pub: in};
    CD = CMTP-(CT+CP);
  enddef;

  def comp CT as
    var CT: millimolar {pub: out, init: 0.2};
    var kpol: third_order_rate_constant {pub: out, init: 10};
    var kf: first_order_rate_constant {init: 3};
    var kb: second_order_rate_constant {init: 2.5};
    var GDP: millimolar {pub: in};
    var CP: millimolar {pub: in};
    var CD: millimolar {pub: in};
    var time: minute {pub: in};
    ode(CT, time) = -(kpol*CT*sqr(CP)+kf*CD+kb*CT*GDP);
  enddef;

  def comp CP as
    var CP: millimolar {pub: out, init: 1.2};
    var kpol: third_order_rate_constant {pub: in};
    var kdp: first_order_rate_constant {init: 0.0025};
    var CT: millimolar {pub: in};
    var time: minute {pub: in};
    ode(CP, time) = kpol*CT*sqr(CP)-kdp*CP;
  enddef;

  def comp PKp as
    var PKp: millimolar {pub: out, init: 0.005};
    var kp2: second_order_rate_constant {init: 10};
    var kp3: first_order_rate_constant {init: 0.05};
    var k4: second_order_rate_constant {init: 0.02};
    var GTP: millimolar {pub: in};
    var PKt: millimolar {pub: in};
    var CP: millimolar {pub: in};
    var time: minute {pub: in};
    ode(PKp, time) = 0.1{dimensionless}*kp2*PKt*CP-(kp3*PKp+k4*PKp*GTP);
  enddef;

  def comp PKt as
    var PKt: millimolar {pub: out};
    var C_PK: millimolar {pub: out, init: 0.01};
    var PKp: millimolar {pub: in};
    PKt = C_PK-PKp;
  enddef;

  def comp V_IN as
    var V_IN: flux {pub: out};
    var G_o: millimolar {pub: in};
    var G: millimolar {pub: in};
    var G6P: millimolar {pub: in};
    var Ke_in: millimolar {init: 12};
    var KG_in: millimolar {init: 0.001};
    var V_IN_max: flux {init: 10};
    V_IN = V_IN_max*(G_o/((KG_in+G_o)*(1{dimensionless}+G6P/Ke_in))-G/((KG_in+G)*(1{dimensionless}+G6P/Ke_in)));
  enddef;

  def comp V_HK as
    var V_HK: flux {pub: out};
    var G: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var KG_m: millimolar {init: 0.11};
    var KG_s: millimolar {init: 0.0062};
    var KATP_m: millimolar {init: 0.1};
    var V_HK_max: flux {init: 13};
    V_HK = V_HK_max*1{dimensionless}/(1{dimensionless}+KG_s*KATP_m/(G*ATP)+KG_m/G+KATP_m/ATP);
  enddef;

  def comp V_PFK as
    var V_PFK: flux {pub: out};
    var G6P: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var AMP: millimolar {pub: in};
    var KG6P_r: millimolar {init: 1};
    var KATP_r: millimolar {init: 0.06};
    var KAMP_r: millimolar {init: 0.025};
    var cATP: dimensionless {init: 1};
    var cAMP: dimensionless {init: 0.019};
    var cG6P: dimensionless {init: 0.0005};
    var Lo: dimensionless {init: 25000};
    var gr: dimensionless {init: 10};
    var n1: dimensionless {init: 2};
    var V_PFK_max: flux {init: 30};
    V_PFK = V_PFK_max*gr*G6P/KG6P_r*ATP/KATP_r*pow(1{dimensionless}+G6P/KG6P_r+ATP/KATP_r+gr*G6P/KG6P_r*ATP/KATP_r, n1-1{dimensionless})/(pow(1{dimensionless}+G6P/KG6P_r+ATP/KATP_r+gr*G6P/KG6P_r*ATP/KATP_r, n1)+Lo*pow((1{dimensionless}+cAMP*AMP/KAMP_r)/(1{dimensionless}+AMP/KAMP_r), n1)*pow(1{dimensionless}+cG6P*G6P/KG6P_r+cATP*ATP/KATP_r+gr*cG6P*G6P/KG6P_r*cATP*ATP/KATP_r, n1));
  enddef;

  def comp V_G6PDH as
    var V_G6PDH: flux {pub: out};
    var G6P: millimolar {pub: in};
    var NADP: millimolar {pub: in};
    var CT: millimolar {pub: in};
    var CD: millimolar {pub: in};
    var TUB: millimolar;
    var KG6P: millimolar {init: 0.05};
    var KNADP: millimolar {init: 0.05};
    var KNADP_: millimolar {init: 0.05};
    var KTUB: millimolar {init: 0.4};
    var V_G6PDH_max: flux {init: 1.6};
    var V_G6PDH_max_II: flux {init: 1};
    V_G6PDH = V_G6PDH_max/(KG6P*KNADP/(G6P*NADP)+KG6P/G6P+KNADP/NADP+1{dimensionless})+V_G6PDH_max_II/(KG6P*KNADP_*KTUB/(G6P*NADP*TUB)+KG6P*KNADP_/(G6P*NADP)+KNADP_*KTUB/(NADP*TUB)+KG6P*KTUB/(G6P*TUB)+KTUB/TUB+KG6P/G6P+KNADP_/NADP+1{dimensionless});
    TUB = CT+CD;
  enddef;

  def comp V_ALD as
    var V_ALD: flux {pub: out};
    var G3P: millimolar {pub: in};
    var FDP: millimolar {pub: in};
    var KG3P_m: millimolar {init: 20};
    var KFDP_m: millimolar {init: 0.5};
    var V_ALD_max: flux {init: 2.5};
    var V_ALD_max_r: flux {init: 1};
    V_ALD = (V_ALD_max*FDP/KFDP_m-V_ALD_max_r*G3P/KG3P_m)/(1{dimensionless}+FDP/KFDP_m+G3P/KG3P_m);
  enddef;

  def comp V_GAPDH as
    var V_GAPDH: flux {pub: out};
    var G3P: millimolar {pub: in};
    var NAD: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var AMP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var K1: millimolar {init: 1.1};
    var K2: millimolar {init: 1.5};
    var K3: millimolar {init: 2.5};
    var KG3P: millimolar {init: 0.0025};
    var KNAD: millimolar {init: 0.18};
    var KNADH_i: millimolar {init: 0.0003};
    var V_GAPDH_max: flux {init: 10};
    V_GAPDH = V_GAPDH_max/(1{dimensionless}+KG3P/G3P+KNAD/NAD*(1{dimensionless}+AMP/K1+ADP/K2+ATP/K3)+KG3P*KNAD/(G3P*NAD)*(1{dimensionless}+NADH/KNADH_i)+1{dimensionless}+AMP/K1+ADP/K2+ATP/K3);
  enddef;

  def comp V_PGK as
    var V_PGK: flux {pub: out};
    var DPG: millimolar {pub: in};
    var KDPG_m: millimolar {init: 0.002};
    var V_PGK_max: flux {init: 3};
    V_PGK = V_PGK_max*DPG/(KDPG_m+DPG);
  enddef;

  def comp V_PK as
    var V_PK: flux {pub: out};
    var PEP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var FDP: millimolar {pub: in};
    var H: millimolar {pub: in};
    var C_PK: millimolar {pub: in};
    var PKp: millimolar {pub: in};
    var R: dimensionless;
    var T: dimensionless;
    var KpH: millimolar {init: 9.5e-9};
    var KPEP_r: millimolar {init: 1};
    var KADP_r: millimolar {init: 0.06};
    var KFDP_r: millimolar {init: 0.025};
    var cADP: dimensionless {init: 1};
    var cFDP: dimensionless {init: 0.01};
    var cPEP: dimensionless {init: 0.02};
    var Lo_PK: dimensionless {init: 1000};
    var gr_PK: dimensionless {init: 0.1};
    var gt_PK: dimensionless {init: 1};
    var n: dimensionless;
    var V_PK_max: flux;
    var V_PKt_max: flux {init: 25};
    var V_PKp_max: flux {init: 50};
    V_PK = V_PK_max/(1{dimensionless}+KpH/H)*(gr_PK*(PEP/KPEP_r)*(ADP/KADP_r)*pow(R, n-1{dimensionless})+Lo_PK*pow((1{dimensionless}+cFDP*FDP/KFDP_r)/(1{dimensionless}+FDP/KFDP_r), n)*(FDP/KFDP_r)*gt_PK*(cPEP*PEP/KPEP_r)*(cADP*ADP/KADP_r)*pow(T, n-1{dimensionless}))/(pow(R, n)+Lo_PK*pow((1{dimensionless}+cFDP*FDP/KFDP_r)/(1{dimensionless}+FDP/KFDP_r), n)*pow(T, n));
    R = 1{dimensionless}+PEP/KPEP_r+ADP/KADP_r+gr_PK*PEP/KPEP_r*ADP/KADP_r;
    T = 1{dimensionless}+cPEP*PEP/KPEP_r+cADP*ADP/KADP_r+gt_PK*cPEP*PEP/KPEP_r*cADP*ADP/KADP_r;
    V_PK_max = V_PKt_max+(V_PKp_max-V_PKt_max)*PKp/C_PK;
    n = 4{dimensionless}+PKp/C_PK;
  enddef;

  def comp V_TCA as
    var V_TCA: flux {pub: out};
    var Py: millimolar {pub: in};
    var KPy_m: millimolar {init: 0.329};
    var V_TCA_max: flux {init: 10};
    V_TCA = V_TCA_max*sqr(Py)/(sqr(KPy_m)+sqr(Py));
  enddef;

  def comp V_ADH as
    var V_ADH: flux {pub: out};
    var Py: millimolar {pub: in};
    var KPy__m: millimolar {init: 0.169};
    var V_ADH_max: flux {init: 0.5};
    V_ADH = V_ADH_max*Py/(KPy__m+Py);
  enddef;

  def comp V_ATPase as
    var V_ATPase: flux {pub: out};
    var ATP: millimolar {pub: in};
    var KATP: first_order_rate_constant {init: 5};
    V_ATPase = KATP*ATP;
  enddef;
  def map between G_o and V_IN for
    vars G_o and G_o;
  enddef;
  def map between G and V_IN for
    vars G and G;
    vars V_IN and V_IN;
  enddef;
  def map between G and V_HK for
    vars G and G;
    vars V_HK and V_HK;
  enddef;
  def map between G6P and V_HK for
    vars V_HK and V_HK;
  enddef;
  def map between G6P and V_PFK for
    vars G6P and G6P;
    vars V_PFK and V_PFK;
  enddef;
  def map between G6P and V_G6PDH for
    vars G6P and G6P;
    vars V_G6PDH and V_G6PDH;
  enddef;
  def map between FDP and V_PFK for
    vars V_PFK and V_PFK;
  enddef;
  def map between FDP and V_ALD for
    vars FDP and FDP;
    vars V_ALD and V_ALD;
  enddef;
  def map between G3P and V_ALD for
    vars G3P and G3P;
    vars V_ALD and V_ALD;
  enddef;
  def map between G3P and V_GAPDH for
    vars G3P and G3P;
    vars V_GAPDH and V_GAPDH;
  enddef;
  def map between DPG and V_GAPDH for
    vars V_GAPDH and V_GAPDH;
  enddef;
  def map between DPG and V_PGK for
    vars DPG and DPG;
    vars V_PGK and V_PGK;
  enddef;
  def map between PEP and V_PGK for
    vars V_PGK and V_PGK;
  enddef;
  def map between PEP and V_PK for
    vars PEP and PEP;
    vars V_PK and V_PK;
  enddef;
  def map between Py and V_PK for
    vars V_PK and V_PK;
  enddef;
  def map between Py and V_TCA for
    vars Py and Py;
    vars V_TCA and V_TCA;
  enddef;
  def map between Py and V_ADH for
    vars Py and Py;
    vars V_ADH and V_ADH;
  enddef;
  def map between ATP and V_HK for
    vars ATP and ATP;
    vars V_HK and V_HK;
  enddef;
  def map between ATP and V_PFK for
    vars ATP and ATP;
    vars V_PFK and V_PFK;
  enddef;
  def map between ATP and V_PGK for
    vars V_PGK and V_PGK;
  enddef;
  def map between ATP and V_PK for
    vars V_PK and V_PK;
  enddef;
  def map between PKp and V_PK for
    vars PKp and PKp;
  enddef;
  def map between ATP and V_TCA for
    vars V_TCA and V_TCA;
  enddef;
  def map between ATP and V_ATPase for
    vars ATP and ATP;
    vars V_ATPase and V_ATPase;
  enddef;
  def map between G6P and V_IN for
    vars G6P and G6P;
  enddef;
  def map between AMP and V_PFK for
    vars AMP and AMP;
  enddef;
  def map between NADP and V_G6PDH for
    vars NADP and NADP;
  enddef;
  def map between CT and V_G6PDH for
    vars CT and CT;
  enddef;
  def map between CD and V_G6PDH for
    vars CD and CD;
  enddef;
  def map between NAD and V_GAPDH for
    vars NAD and NAD;
  enddef;
  def map between NADH and V_GAPDH for
    vars NADH and NADH;
  enddef;
  def map between ATP and V_GAPDH for
    vars ATP and ATP;
  enddef;
  def map between AMP and V_GAPDH for
    vars AMP and AMP;
  enddef;
  def map between ADP and V_GAPDH for
    vars ADP and ADP;
  enddef;
  def map between ADP and V_PK for
    vars ADP and ADP;
  enddef;
  def map between FDP and V_PK for
    vars FDP and FDP;
  enddef;
  def map between H and V_PK for
    vars H and H;
  enddef;
  def map between PKt and V_PK for
    vars C_PK and C_PK;
  enddef;
  def map between G and environment for
    vars time and time;
  enddef;
  def map between G6P and environment for
    vars time and time;
  enddef;
  def map between FDP and environment for
    vars time and time;
  enddef;
  def map between G3P and environment for
    vars time and time;
  enddef;
  def map between DPG and environment for
    vars time and time;
  enddef;
  def map between PEP and environment for
    vars time and time;
  enddef;
  def map between Py and environment for
    vars time and time;
  enddef;
  def map between ATP and environment for
    vars time and time;
  enddef;
  def map between CT and environment for
    vars time and time;
  enddef;
  def map between CP and environment for
    vars time and time;
  enddef;
  def map between PKp and environment for
    vars time and time;
  enddef;
  def map between CT and CP for
    vars kpol and kpol;
    vars CP and CP;
    vars CT and CT;
  enddef;
  def map between ADP and ATP for
    vars ATP and ATP;
  enddef;
  def map between ADP and AMP for
    vars AMP and AMP;
  enddef;
  def map between CT and CD for
    vars CD and CD;
    vars CT and CT;
  enddef;
  def map between CD and CP for
    vars CP and CP;
  enddef;
  def map between GDP and CT for
    vars GDP and GDP;
  enddef;
  def map between GTP and PKp for
    vars GTP and GTP;
  enddef;
  def map between PKt and PKp for
    vars PKt and PKt;
    vars PKp and PKp;
  enddef;
  def map between CP and PKp for
    vars CP and CP;
  enddef;
enddef;
// rdf:#77a08214-eb8a-40b3-bf05-23a9e4cd7bbf
// Given: Miguel
// Family: Aon
// Other: A
// rdf:#85564348-0ef3-4775-a85d-bd790336aa12
// N: Given Sonia; Family Cortassa
