// creator: Family Lloyd; Given Catherine; Other May; c.lloyd@auckland.ac.nz; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2003-08-28
// species: Trypanosoma brucei
// reference: subject_type keyword; metabolism; glycolysis
// reference: Pubmed_id 2000-02-29; Family Bakker; Given B; Other M; Family Mensonides; Given F; Other I; Family Teusink; Given B; Family van Hoek; Given P; Family Michels; Given P; Other A; Family Westerhoff; Given H; Other V; title Compartmentation protects trypanosomes from the dangerous design of glycolysis; W3CDTF 2000-02-29; title PNAS; volume 97; first_page 2087; last_page 2092
def model bakker_2000 as
  // Glycosomes Protect Trypanosomes from Glycolysis
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in OpenCell (but not in COR due to the presence of differential algebraic equations - or "circular equations"). The units have been checked and they are consistent. The model does not replicate the published results (we have added 5mM of external glucose at 60 seconds but this does not cause the ATP concetration to increase. The original CellML model was based on equations published in the supplementary material in PNAS but this is no longer available online. We have tried to contact the authors and the journal but 10 years on they were unable to locate the missing material.
  //
  // Model Structure
  //
  // ABSTRACT: Unlike in other organisms, in trypanosomes and other Kinetoplastida the larger part of glycolysis takes place in a specialized organelle, called the glycosome. At present it is impossible to remove the glycosome without changing much of the rest of the cell. It would seem impossible, therefore, to assess the metabolic consequences of this compartmentation. Therefore, we here develop a computer experimentation approach, which we call computational cell biology. A validated molecular kinetic computer replica was built of glycolysis in the parasite Trypanosoma brucei. Removing the glycosome membrane in that replica had little effect on the steady-state flux, which argues against the prevalent speculation that glycosomes serve to increase flux by concentrating the enzymes. Removal of the membrane did cause (i) the sugar phosphates to rise to unphysiologically high levels, which must have pathological effects, and (ii) a failure to recover from glucose deprivation. We explain these effects on the basis of the biochemical organization of the glycosome. We conclude (i) that the glycosome protects trypanosomes from the negative side effects of the "turbo" structure of glycolysis and (ii) that computer experimentation based on solid molecular data is a powerful tool to address questions that are not, or not yet, accessible to experimentation.
  //
  // The original paper is cited below:
  //
  // Compartmentation protects trypanosomes from the dangerous design of glycolysis, Barbara M. Bakker, Femke I.C. Mensonides, Bas Teusink, Pim van Hoek, Paul A. M. Michels, and Hans V. Westerhoff, 2000, Proceedings of the National Academy of Sciences, 97, 2087-2092. PubMed ID: 10681445 (http://www.ncbi.nlm.nih.gov/pubmed/10681445)
  //
  // A reaction diagram of glycolysis
  //
  // A scheme of glycolysis in the bloodstream form of the parasite Trypanosoma brucei. In the model described here, the glycosome is absent.
  def unit minute as
    unit second {mult: 60.0};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit flux as
    unit millimolar;
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;
  // substrates

  // title: GlcI
  // alternative: cytosolic glucose
  def comp GlcI as
    var GlcI: millimolar {pub: out, init: 0.0340009};
    var vHK: flux {pub: in};
    var vGlcTr: flux {pub: in};
    var time: second {pub: in};
    ode(GlcI, time) = vGlcTr-vHK;
  enddef;

  // title: hexose_P
  // alternative: total concentration of six carbon phosphates
  def comp hexose_P as
    var hexose_P: millimolar {pub: out, init: 2.583763};
    var vHK: flux {pub: in};
    var vPFK: flux {pub: in};
    var time: second {pub: in};
    ode(hexose_P, time) = vHK-vPFK;
  enddef;

  // title: Fru16BP
  // alternative: fructose 1,6-bisphopshate
  def comp Fru16BP as
    var Fru16BP: millimolar {pub: out, init: 16.5371};
    var vPFK: flux {pub: in};
    var vALD: flux {pub: in};
    var time: second {pub: in};
    ode(Fru16BP, time) = vPFK-vALD;
  enddef;

  // title: triose_P
  // alternative: total concentration of three carbon phopshates
  def comp triose_P as
    var triose_P: millimolar {pub: out, init: 3.9391429};
    var vALD: flux {pub: in};
    var vGAPDH: flux {pub: in};
    var vGDH: flux {pub: in};
    var vGPO: flux {pub: in};
    var time: second {pub: in};
    ode(triose_P, time) = 2.0{dimensionless}*vALD+vGPO-(vGAPDH+vGDH);
  enddef;

  // title: BPGA13
  // alternative: 1,3-bisphosphoglycerate
  def comp BPGA13 as
    var BPGA13: millimolar {pub: out, init: 0.0326745};
    var vGAPDH: flux {pub: in};
    var vPGK: flux {pub: in};
    var time: second {pub: in};
    ode(BPGA13, time) = vGAPDH-vPGK;
  enddef;

  // title: N
  // alternative: the sum of 3-phosphoglycerate, 2-phosphoglycerate, and phosphoenolpyruvate
  def comp N as
    var N: millimolar {pub: out, init: 1.59603};
    var vPGK: flux {pub: in};
    var vPK: flux {pub: in};
    var time: second {pub: in};
    ode(N, time) = vPGK-vPK;
  enddef;

  // title: Pyr
  // alternative: cytosolic pyruvate
  def comp Pyr as
    var Pyr: millimolar {pub: out, init: 4.77413};
    var vPK: flux {pub: in};
    var vPyrTr: flux {pub: in};
    var time: second {pub: in};
    ode(Pyr, time) = vPK-vPyrTr;
  enddef;

  // title: NADH
  // alternative: reduced nicotinamide adenine dinucleotide
  def comp NADH as
    var NADH: millimolar {pub: out, init: 0.0448639};
    var vGAPDH: flux {pub: in};
    var vGDH: flux {pub: in};
    var time: second {pub: in};
    ode(NADH, time) = vGAPDH-vGDH;
  enddef;

  // title: NAD
  // alternative: nicotinamide adenine dinucleotide
  def comp NAD as
    var NAD: millimolar {pub: out, init: 0.0448639};
    var vGAPDH: flux {pub: in};
    var vGDH: flux {pub: in};
    var time: second {pub: in};
    ode(NAD, time) = vGDH-vGAPDH;
  enddef;

  // title: Gly3P
  // alternative: glyceraldehyde 3-phopshate
  def comp Gly3P as
    var Gly3P: millimolar {pub: out, init: 0.0};
    var vGlyK: flux {pub: in};
    var vGDH: flux {pub: in};
    var vGPO: flux {pub: in};
    var time: second {pub: in};
    ode(Gly3P, time) = vGDH-(vGlyK+vGPO);
  enddef;

  // title: Gly
  // alternative: glycerol
  def comp Gly as
    var Gly: millimolar {pub: out, init: 0.0};
    var vGlyK: flux {pub: in};
    var time: second {pub: in};
    ode(Gly, time) = vGlyK;
  enddef;

  // title: P
  // alternative: total concentration of adenosine phosphates
  def comp P as
    var P: millimolar {pub: out, init: 7.63936};
    var vHK: flux {pub: in};
    var vPGK: flux {pub: in};
    var vPFK: flux {pub: in};
    var vGlyK: flux {pub: in};
    var vPK: flux {pub: in};
    var vATPase: flux {pub: in};
    var time: second {pub: in};
    ode(P, time) = vPGK+vGlyK+vPK-(vHK+vPFK+vATPase);
  enddef;

  // title: ATP
  // alternative: adenosine triphosphate
  def comp ATP as
    var ATP: millimolar {pub: out};
    var P: millimolar {pub: in};
    var sumA: millimolar {init: 3.9};
    var Keq_AK: dimensionless {init: 0.442};
    ATP = (P*(1.0{dimensionless}-4.0{dimensionless}*Keq_AK)-sumA+pow(sqr(sumA-(1.0{dimensionless}-4.0{dimensionless}*Keq_AK)*P)+4.0{dimensionless}*(1.0{dimensionless}-4.0{dimensionless}*Keq_AK)*(-Keq_AK*sqr(P)), 0.5{dimensionless}))/(2.0{dimensionless}*(1.0{dimensionless}-4.0{dimensionless}*Keq_AK));
  enddef;

  // title: ADP
  // alternative: adenosine diphosphate
  def comp ADP as
    var ADP: millimolar {pub: out};
    var ATP: millimolar {pub: in};
    var P: millimolar {pub: in};
    ADP = P-2.0{dimensionless}*ATP;
  enddef;

  // title: DHAP
  // alternative: dihydroxyacetone phosphate
  def comp DHAP as
    var DHAP: millimolar {pub: out};
    var Fru16BP: millimolar {pub: in};
    var Fru6P: millimolar {pub: in};
    var P: millimolar {pub: in};
    var BPGA13: millimolar {pub: in};
    var GAP: millimolar {pub: in};
    var Glc6P: millimolar {pub: in};
    var sumc4: millimolar {init: 45.0};
    var sumc5: millimolar {init: 5.0};
    DHAP = sumc5*DHAP/(sumc4+sumc5-(BPGA13+2{dimensionless}*Fru16BP+Fru6P+GAP+Glc6P+P));
  enddef;

  // title: GAP
  // alternative: glyceraldehyde 3-phopshate
  def comp GAP as
    var GAP: millimolar {pub: out};
    var triose_P: millimolar {pub: in};
    var DHAP: millimolar {pub: in};
    GAP = triose_P-DHAP;
  enddef;

  // title: GlcE
  // alternative: external glucose
  def comp GlcE as
    var GlcE: millimolar {pub: out};
    var time: second {pub: in};
    GlcE = sel
      case (time >= 60.0{second}) and (time < 61.0{second}):
        5.0{millimolar};
      otherwise:
        0.05{millimolar};
    endsel;
  enddef;

  // title: Glc6P
  // alternative: glucose-6-phopshate
  def comp Glc6P as
    var Glc6P: millimolar {pub: out, init: 2.07199};
    var vHK: flux {pub: in};
    var vPGI: flux {pub: in};
    var time: second {pub: in};
    ode(Glc6P, time) = vHK-vPGI;
  enddef;

  // title: Fru6P
  // alternative: fructose 6-phopshate
  def comp Fru6P as
    var Fru6P: millimolar {pub: out};
    var Glc6P: millimolar {pub: in};
    var hexose_P: millimolar {pub: in};
    Fru6P = hexose_P-Glc6P;
  enddef;

  // title: PGA3
  // alternative: 3-phosphoglycerate
  def comp PGA3 as
    var PGA3: millimolar {pub: out};
    var N: millimolar {pub: in};
    var PEP: millimolar {pub: in};
    PGA3 = N-PEP;
  enddef;

  // title: PEP
  // alternative: phosphoenolpyruvate
  def comp PEP as
    var PEP: millimolar {pub: out};
    var Keq_ENO: dimensionless {init: 6.7};
    var Keq_PGM: dimensionless {init: 0.187};
    var PGA3: millimolar {pub: in};
    PEP = Keq_ENO*Keq_PGM*PGA3;
  enddef;
  // The following components describe the reactions of the model.

  def comp vGlcTr as
    var vGlcTr: flux {pub: out};
    var GlcE: millimolar {pub: in};
    var GlcI: millimolar {pub: in};
    var K_Glc: millimolar {init: 2.0};
    var alpha: dimensionless {init: 0.75};
    var vGlcTr_max: flux {init: 106.2};
    vGlcTr = vGlcTr_max*((GlcE-GlcI)/(K_Glc+GlcE+GlcI+alpha*GlcE*(GlcI/K_Glc)));
  enddef;

  def comp vHK as
    var vHK: flux {pub: out};
    var GlcI: millimolar {pub: in};
    var Glc6P: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var K_GlcI: millimolar {init: 0.1};
    var K_Glc6P: millimolar {init: 12.0};
    var K_ATP: millimolar {init: 0.116};
    var K_ADP: millimolar {init: 0.126};
    var vHK_max: flux {init: 625.0};
    vHK = vHK_max*GlcI*ATP/(K_ATP*K_GlcI*(1.0{dimensionless}+Glc6P/K_Glc6P+GlcI/K_GlcI)*(1.0{dimensionless}+ATP/K_ATP+ADP/K_ADP));
  enddef;

  def comp vPGI as
    var vPGI: flux {pub: out};
    var Glc6P: millimolar {pub: in};
    var Fru6P: millimolar {pub: in};
    var K_Glc6P: millimolar {init: 0.4};
    var K_Fru6P: millimolar {init: 0.12};
    var vPGI_max: flux {init: 848.0};
    vPGI = vPGI_max*(Glc6P/K_Glc6P-Fru6P/K_Fru6P)/(1{dimensionless}+Glc6P/K_Glc6P+Fru6P/K_Fru6P);
  enddef;

  def comp vPFK as
    var vPFK: flux {pub: out};
    var Fru6P: millimolar {pub: in};
    var Fru16BP: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var Ki_1: millimolar {init: 15.8};
    var Ki_2: millimolar {init: 10.7};
    var KM_Fru6P: millimolar {init: 0.82};
    var KM_ATP: millimolar {init: 0.026};
    var vPFK_max: flux {init: 780.0};
    vPFK = Ki_1*vPFK_max*Fru6P*ATP/(KM_ATP*KM_Fru6P*(Fru16BP+Ki_1)*(1.0{dimensionless}+Fru16BP/Ki_2+Fru6P/KM_Fru6P)*(1.0{dimensionless}+ATP/KM_ATP));
  enddef;

  def comp vALD as
    var vALD: flux {pub: out};
    var Fru16BP: millimolar {pub: in};
    var GAP: millimolar {pub: in};
    var DHAP: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var sumA: millimolar {init: 6.0};
    var KM_GAP: millimolar {init: 0.067};
    var Ki_GAP: millimolar {init: 0.098};
    var KM_DHAP: millimolar {init: 0.015};
    var vALD_max_forward: flux {init: 184.5};
    var vALD_max_reverse: flux {init: 219.555};
    vALD = (vALD_max_forward*Fru16BP/(0.009{millimolar}*(1{dimensionless}+ATP/0.68{millimolar}+ADP/1.51{millimolar}+(sumA-(ATP+ADP))/3.65{millimolar}))-vALD_max_reverse*GAP*DHAP/(KM_DHAP*KM_GAP))/(1{dimensionless}+GAP/KM_GAP+DHAP/KM_DHAP+GAP*DHAP/(KM_DHAP*KM_GAP)+Fru16BP/(0.009{millimolar}*(1{dimensionless}+ATP/0.68{millimolar}+ADP/1.51{millimolar}+(sumA-(ATP+ADP))/3.65{millimolar}))+Fru16BP*GAP/(Ki_GAP*0.009{millimolar}*(1{dimensionless}+ATP/0.68{millimolar}+ADP/1.51{millimolar}+(sumA-(ATP+ADP))/3.65{millimolar})));
  enddef;

  def comp vTPI as
    var vTPI: flux {pub: out};
    var DHAP: millimolar {pub: in};
    var GAP: millimolar {pub: in};
    var K_DHAP: millimolar {init: 1.2};
    var K_GAP: millimolar {init: 0.25};
    var vTPI_max: flux {init: 842.0};
    vTPI = vTPI_max*(DHAP/K_DHAP-5.7{dimensionless}*GAP/K_GAP)/(1.0{dimensionless}+GAP/K_GAP+DHAP/K_DHAP);
  enddef;

  def comp vGAPDH as
    var vGAPDH: flux {pub: out};
    var NAD: millimolar {pub: in};
    var GAP: millimolar {pub: in};
    var BPGA13: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var K_NAD: millimolar {init: 0.45};
    var K_GAP: millimolar {init: 0.15};
    var K_BPGA13: millimolar {init: 0.1};
    var K_NADH: millimolar {init: 0.02};
    var vGAPDH_max_forward: flux {init: 1470.0};
    var vGAPDH_max_reverse: flux {init: 984.9};
    var vGAPDH_max: dimensionless {init: 1.0};
    vGAPDH = vGAPDH_max*(vGAPDH_max_forward*(GAP*(NAD/K_GAP/K_NAD)-vGAPDH_max_reverse/vGAPDH_max_forward*(BPGA13*NADH/K_BPGA13/K_NADH))/((1{dimensionless}+GAP/K_GAP+BPGA13/K_BPGA13)*(1{dimensionless}+NAD/K_NAD+NADH/K_NADH)));
  enddef;

  def comp vGDH as
    var vGDH: flux {pub: out};
    var NADH: millimolar {pub: in};
    var Gly3P: millimolar {pub: in};
    var DHAP: millimolar {pub: in};
    var NAD: millimolar {pub: in};
    var K_NADH: millimolar {init: 0.01};
    var K_Gly3P: millimolar {init: 2.0};
    var K_DHAP: millimolar {init: 0.1};
    var K_NAD: millimolar {init: 0.4};
    var vGDH_max_forward: flux {init: 533.0};
    var vGDH_max_reverse: flux {init: 149.24};
    var vGDH_max: dimensionless {init: 1.0};
    vGDH = vGDH_max*vGDH_max_forward*(NADH*DHAP/(K_NADH*K_DHAP)-vGDH_max_reverse*NAD*Gly3P/(K_Gly3P*K_NAD*vGDH_max_forward))/((1{dimensionless}+NAD/K_NAD+NADH/K_NADH)*(1{dimensionless}+DHAP/K_DHAP+Gly3P/K_Gly3P));
  enddef;

  def comp vGPO as
    var vGPO: flux {pub: out};
    var Gly3P: millimolar {pub: in};
    var K_Gly3P: millimolar {init: 1.7};
    var vGPO_max: flux {init: 368.0};
    vGPO = vGPO_max*Gly3P/(Gly3P+K_Gly3P);
  enddef;

  def comp vPyrTr as
    var vPyrTr: flux {pub: out};
    var Pyr: millimolar {pub: in};
    var K_pyruvate: millimolar {init: 1.96};
    var vPyrTr_max: flux {init: 200.0};
    vPyrTr = vPyrTr_max*Pyr/K_pyruvate/(1.0{dimensionless}+Pyr/K_pyruvate);
  enddef;

  def comp vPGK as
    var vPGK: flux {pub: out};
    var ADP: millimolar {pub: in};
    var BPGA13: millimolar {pub: in};
    var PGA3: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var K_ADP: millimolar {init: 0.1};
    var K_BPGA13: millimolar {init: 0.05};
    var K_PGA3: millimolar {init: 1.62};
    var K_ATP: millimolar {init: 0.29};
    var vPGK_max_forward: flux {init: 640.0};
    var vPGK_max_reverse: flux {init: 18.56};
    var vPGK_max: dimensionless {init: 1.0};
    vPGK = vPGK_max*vPGK_max_forward*(-vPGK_max_reverse*PGA3*ATP/(K_ATP*K_PGA3*vPGK_max_forward)+BPGA13*ADP/(K_BPGA13*K_ADP))/((1{dimensionless}+BPGA13/K_BPGA13+PGA3/K_PGA3)*(1{dimensionless}+ADP/K_ADP+ATP/K_ATP));
  enddef;

  def comp vPK as
    var vPK: flux {pub: out};
    var PEP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var KM_ADP: millimolar {init: 0.114};
    var n: dimensionless {init: 2.5};
    var vPK_max: flux {init: 2600};
    vPK = vPK_max*pow(PEP/(0.34{millimolar}*(1{dimensionless}+ATP/0.57{millimolar}+ADP/0.64{millimolar})), n)*ADP/KM_ADP/((1{dimensionless}+pow(PEP/(0.34{millimolar}*(1{dimensionless}+ATP/0.57{millimolar}+ADP/0.64{millimolar})), n))*(1{dimensionless}+ADP/KM_ADP));
  enddef;

  def comp vATPase as
    var vATPase: flux {pub: out};
    var ATP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var k: flux {init: 50};
    vATPase = k*ATP/ADP;
  enddef;

  def comp vGlyK as
    var vGlyK: flux {pub: out};
    var ADP: millimolar {pub: in};
    var Gly3P: millimolar {pub: in};
    var Gly: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var K_ADP: millimolar {init: 0.12};
    var K_Gly3P: millimolar {init: 5.1};
    var K_Gly: millimolar {init: 0.12};
    var K_ATP: millimolar {init: 0.19};
    var vGlyK_max_forward: flux {init: 220.0};
    var vGlyK_max_reverse: flux {init: 334000.0};
    var vGlyK_max: dimensionless {init: 1.0};
    vGlyK = vGlyK_max*(vGlyK_max_forward*ADP*Gly3P/(K_ADP*K_Gly3P)-vGlyK_max_reverse*ATP*Gly/(K_ATP*K_Gly))/((1{dimensionless}+Gly3P/K_Gly3P+Gly/K_Gly)*(1{dimensionless}+ADP/K_ADP+ATP/K_ATP));
  enddef;
  def map between GlcI and environment for
    vars time and time;
  enddef;
  def map between Glc6P and environment for
    vars time and time;
  enddef;
  def map between Fru16BP and environment for
    vars time and time;
  enddef;
  def map between Gly3P and environment for
    vars time and time;
  enddef;
  def map between Gly and environment for
    vars time and time;
  enddef;
  def map between BPGA13 and environment for
    vars time and time;
  enddef;
  def map between Pyr and environment for
    vars time and time;
  enddef;
  def map between NADH and environment for
    vars time and time;
  enddef;
  def map between hexose_P and environment for
    vars time and time;
  enddef;
  def map between triose_P and environment for
    vars time and time;
  enddef;
  def map between N and environment for
    vars time and time;
  enddef;
  def map between P and environment for
    vars time and time;
  enddef;
  def map between NAD and environment for
    vars time and time;
  enddef;
  def map between GlcE and environment for
    vars time and time;
  enddef;
  def map between GlcE and vGlcTr for
    vars GlcE and GlcE;
  enddef;
  def map between GlcI and vGlcTr for
    vars GlcI and GlcI;
    vars vGlcTr and vGlcTr;
  enddef;
  def map between GlcI and vHK for
    vars GlcI and GlcI;
    vars vHK and vHK;
  enddef;
  def map between Glc6P and vHK for
    vars Glc6P and Glc6P;
    vars vHK and vHK;
  enddef;
  def map between hexose_P and vHK for
    vars vHK and vHK;
  enddef;
  def map between Glc6P and vPGI for
    vars Glc6P and Glc6P;
    vars vPGI and vPGI;
  enddef;
  def map between Fru6P and vPGI for
    vars Fru6P and Fru6P;
  enddef;
  def map between Fru6P and vPFK for
    vars Fru6P and Fru6P;
  enddef;
  def map between hexose_P and vPFK for
    vars vPFK and vPFK;
  enddef;
  def map between Fru16BP and vPFK for
    vars Fru16BP and Fru16BP;
    vars vPFK and vPFK;
  enddef;
  def map between Fru16BP and vALD for
    vars Fru16BP and Fru16BP;
    vars vALD and vALD;
  enddef;
  def map between DHAP and vALD for
    vars DHAP and DHAP;
  enddef;
  def map between DHAP and vTPI for
    vars DHAP and DHAP;
  enddef;
  def map between GAP and vTPI for
    vars GAP and GAP;
  enddef;
  def map between DHAP and vGDH for
    vars DHAP and DHAP;
  enddef;
  def map between triose_P and vALD for
    vars vALD and vALD;
  enddef;
  def map between triose_P and vGAPDH for
    vars vGAPDH and vGAPDH;
  enddef;
  def map between triose_P and vGDH for
    vars vGDH and vGDH;
  enddef;
  def map between triose_P and vGPO for
    vars vGPO and vGPO;
  enddef;
  def map between GAP and vALD for
    vars GAP and GAP;
  enddef;
  def map between GAP and vGAPDH for
    vars GAP and GAP;
  enddef;
  def map between Gly3P and vGDH for
    vars Gly3P and Gly3P;
    vars vGDH and vGDH;
  enddef;
  def map between Gly and vGlyK for
    vars vGlyK and vGlyK;
    vars Gly and Gly;
  enddef;
  def map between Gly3P and vGlyK for
    vars vGlyK and vGlyK;
    vars Gly3P and Gly3P;
  enddef;
  def map between BPGA13 and vGAPDH for
    vars BPGA13 and BPGA13;
    vars vGAPDH and vGAPDH;
  enddef;
  def map between BPGA13 and vPGK for
    vars BPGA13 and BPGA13;
    vars vPGK and vPGK;
  enddef;
  def map between PEP and vPK for
    vars PEP and PEP;
  enddef;
  def map between N and vPGK for
    vars vPGK and vPGK;
  enddef;
  def map between N and vPK for
    vars vPK and vPK;
  enddef;
  def map between Pyr and vPK for
    vars vPK and vPK;
  enddef;
  def map between Pyr and vPyrTr for
    vars Pyr and Pyr;
    vars vPyrTr and vPyrTr;
  enddef;
  def map between P and vHK for
    vars vHK and vHK;
  enddef;
  def map between P and vPFK for
    vars vPFK and vPFK;
  enddef;
  def map between P and vPGK for
    vars vPGK and vPGK;
  enddef;
  def map between P and vGlyK for
    vars vGlyK and vGlyK;
  enddef;
  def map between P and vPK for
    vars vPK and vPK;
  enddef;
  def map between P and vATPase for
    vars vATPase and vATPase;
  enddef;
  def map between Fru6P and Glc6P for
    vars Glc6P and Glc6P;
  enddef;
  def map between hexose_P and Fru6P for
    vars hexose_P and hexose_P;
  enddef;
  def map between GAP and DHAP for
    vars GAP and GAP;
    vars DHAP and DHAP;
  enddef;
  def map between N and PGA3 for
    vars N and N;
  enddef;
  def map between PEP and PGA3 for
    vars PEP and PEP;
    vars PGA3 and PGA3;
  enddef;
  def map between Gly3P and vGPO for
    vars vGPO and vGPO;
    vars Gly3P and Gly3P;
  enddef;
  def map between NADH and vGAPDH for
    vars vGAPDH and vGAPDH;
    vars NADH and NADH;
  enddef;
  def map between NADH and vGDH for
    vars vGDH and vGDH;
    vars NADH and NADH;
  enddef;
  def map between NAD and vGAPDH for
    vars vGAPDH and vGAPDH;
    vars NAD and NAD;
  enddef;
  def map between NAD and vGDH for
    vars vGDH and vGDH;
    vars NAD and NAD;
  enddef;
  def map between ATP and ADP for
    vars ATP and ATP;
  enddef;
  def map between P and ADP for
    vars P and P;
  enddef;
  def map between P and ATP for
    vars P and P;
  enddef;
  def map between ATP and vHK for
    vars ATP and ATP;
  enddef;
  def map between ATP and vGlyK for
    vars ATP and ATP;
  enddef;
  def map between ATP and vPK for
    vars ATP and ATP;
  enddef;
  def map between ATP and vALD for
    vars ATP and ATP;
  enddef;
  def map between ATP and vATPase for
    vars ATP and ATP;
  enddef;
  def map between ADP and vATPase for
    vars ADP and ADP;
  enddef;
  def map between ADP and vHK for
    vars ADP and ADP;
  enddef;
  def map between ADP and vALD for
    vars ADP and ADP;
  enddef;
  def map between ADP and vPGK for
    vars ADP and ADP;
  enddef;
  def map between ADP and vGlyK for
    vars ADP and ADP;
  enddef;
  def map between ADP and vPK for
    vars ADP and ADP;
  enddef;
  def map between ATP and vPGK for
    vars ATP and ATP;
  enddef;
  def map between ATP and vPFK for
    vars ATP and ATP;
  enddef;
  def map between PGA3 and vPGK for
    vars PGA3 and PGA3;
  enddef;
  def map between triose_P and GAP for
    vars triose_P and triose_P;
  enddef;
  def map between Fru16BP and DHAP for
    vars Fru16BP and Fru16BP;
  enddef;
  def map between Fru6P and DHAP for
    vars Fru6P and Fru6P;
  enddef;
  def map between P and DHAP for
    vars P and P;
  enddef;
  def map between BPGA13 and DHAP for
    vars BPGA13 and BPGA13;
  enddef;
  def map between Glc6P and DHAP for
    vars Glc6P and Glc6P;
  enddef;
enddef;
