//   FILE :  bakker_model_1997.xml
//
// CREATED :  1st August 2002
//
// LAST MODIFIED : 27th April 2005
//
// AUTHOR :  Catherine Lloyd
//           Department of Engineering Science
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of the 1997 Bakker et al. mathematical model of glycolysis in the parasite Trypanosoma brucei.
//
// CHANGES:
//   09/04/2003 - AAC - Added publication date information.
//   01/09/2003 - CML - Changed model structure to remove the model element from
//                      the CellML.
//   27/04/2005 - PJV - Modified names to conform with cellml1.1 naming
//                      conventions and alligned comment brackets correctly.
// publisher: The University of Auckland, Auckland Bioengineering Institute
// created: W3CDTF 2002-08-01T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2009-05-05T11:37:58+12:00; Fixed e-notation error Updated curation status; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2003-04-09; Added publication date information.; Given Autumn; Family Cuellar; Other A
// modification: W3CDTF 2003-09-01; Changed model structure to remove the model element from the CellML.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2005-04-27; Modified names to conform with cellml 1.1 naming conventions and modified comment brackets.; Given Peter; Family Villiger; Other John
// title: A model of glycolysis in the parasite Trypanosoma brucei.
// comment: FN Catherine Lloyd; This is the CellML description of Bakker et al's 1997 mathematical model of glycolysis in the parasite Trypanosoma brucei.
// reference: Pubmed_id 9013556; Given Barbara; Family Bakker; Other M; Given Paul; Family Michels; Other A; Other M; Given Fred; Family Opperdoes; Other R; Given Hans; Family Westerhoff; Other V; title Glycolysis in Bloodstream Form Trypanosoma brucei Can Be Understood in Terms of the Kinetics of the Glycolytic Enzymes; volume 272; first_page 3207; title The Journal of Biological Chemistry; W3CDTF 1997-02-07; last_page 3215
// reference: subject_type keyword; metabolism; glycolysis
// species: Trypanosoma brucei
def model bakker_1997 as
  // Glycolysis in bloodstream form Trypanosoma brucei can be understood in terms of the kinetics of the glycolytic enzymes
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This model is valid CellML and appears to match the published equations. However the model will not run in either COR or OpenCell.
  //
  // Model Structure
  //
  // ABSTRACT: In trypanosomes the first part of glycolysis takes place in specialized microbodies, the glycosomes. Most glycolytic enzymes of Trypanosoma brucei have been purified and characterized kinetically. In this paper a mathematical model of glycolysis in the bloodstream form of this organism is developed on the basis of all available kinetic data. The fluxes and the cytosolic metabolite concentrations as predicted by the model were in accordance with available data as measured in non-growing trypanosomes, both under aerobic and under anaerobic conditions. The model also reproduced the inhibition of anaerobic glycolysis by glycerol, although the amount of glycerol needed to inhibit glycolysis completely was lower than experimentally determined. At low extracellular glucose concentrations the intracellular glucose concentration remained very low, and only at 5 mM of extracellular glucose, free glucose started to accumulate intracellularly, in close agreement with experimental observations. This biphasic relation could be related to the large difference between the affinities of the glucose transporter and hexokinase for intracellular glucose. The calculated intraglycosomal metabolite concentrations demonstrated that enzymes that have been shown to be near-equilibrium in the cytosol must work far from equilibrium in the glycosome in order to maintain the high glycolytic flux in the latter.
  //
  // The original paper reference is cited below:
  //
  // Glycolysis in Bloodstream Form Trypanosoma brucei Can Be Understood in Terms of the Kinetics of the Glycolytic Enzyme, Barbara M. Bakker, Paul A. M. Michels, Fred R. Opperdoes, and Hans V. Westerhoff, 1997, The Journal of Biological Chemistry , 272, 3207-3215. PubMed ID: 9013556 (http://www.ncbi.nlm.nih.gov/pubmed/9013556)
  //
  // A reaction diagram of glycolysis
  //
  // The stoichiometric scheme of the model of glycolysis in the bloodstream form of the parasite Trypanosoma brucei.
  def unit minute as
    unit second {mult: 60.0};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit flux as
    unit nanomolar;
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp volume_ratio as
    var Vc_Vg: dimensionless {pub: out, init: 22.3};
  enddef;

  // title: Glc_o
  // alternative: external glucose
  def comp Glc_o as
    var Glc_o: millimolar {pub: out, init: 5.0};
  enddef;

  // title: Glc_i
  // alternative: cytosolic glucose
  def comp Glc_i as
    var Glc_i: millimolar {pub: out, init: 0.01};
    var V_HK: flux {pub: in};
    var V_glucose_transport: flux {pub: in};
    var time: second {pub: in};
    ode(Glc_i, time) = V_glucose_transport-V_HK;
  enddef;

  // title: Glc_6_P_g
  // alternative: glycosomal glucose-6-phopshate
  def comp Glc_6_P_g as
    var Glc_6_P_g: millimolar {pub: out};
    var Keq_PGI: dimensionless {init: 0.29};
    var Fru_6_P_g: millimolar {pub: in};
    var hexose_P_g: millimolar {pub: in};
    Glc_6_P_g = hexose_P_g/Keq_PGI;
  enddef;

  // title: Fru_6_P_g
  // alternative: glycosomal fructose 6-phopshate
  def comp Fru_6_P_g as
    var Fru_6_P_g: millimolar {pub: out};
    var Glc_6_P_g: millimolar {pub: in};
    var hexose_P_g: millimolar {pub: in};
    Fru_6_P_g = hexose_P_g-Glc_6_P_g;
  enddef;

  // title: hexose_P_g
  // alternative: total concentration of glycosomal six carbon phosphates
  def comp hexose_P_g as
    var hexose_P_g: millimolar {pub: out, init: 0.01};
    var V_HK: flux {pub: in};
    var V_PFK: flux {pub: in};
    var time: second {pub: in};
    ode(hexose_P_g, time) = V_HK-V_PFK;
  enddef;

  // title: Fru_1_6_BP_g
  // alternative: glycosomal fructose 1,6-bisphopshate
  def comp Fru_1_6_BP_g as
    var Fru_1_6_BP_g: millimolar {pub: out, init: 0.01};
    var V_PFK: flux {pub: in};
    var V_ALD: flux {pub: in};
    var time: second {pub: in};
    ode(Fru_1_6_BP_g, time) = V_PFK-V_ALD;
  enddef;

  // title: GA_3_P_g
  // alternative: glycosomal glyceraldehyde 3-phopshate
  def comp GA_3_P_g as
    var GA_3_P_g: millimolar {pub: out};
    var Keq_TIM: dimensionless {pub: in};
    var DHAP_g: millimolar {pub: in};
    GA_3_P_g = Keq_TIM*DHAP_g;
  enddef;

  // title: triose_P
  // alternative: total concentration of three carbon phopshates
  def comp triose_P as
    var triose_P: millimolar {pub: out, init: 0.01};
    var V_ALD: flux {pub: in};
    var V_GAPDH: flux {pub: in};
    var V_GDH: flux {pub: in};
    var V_GPO: flux {pub: in};
    var time: second {pub: in};
    ode(triose_P, time) = 2.0{dimensionless}*V_ALD+V_GPO-(V_GAPDH+V_GDH);
  enddef;

  // title: one_three_BPGA_g
  // alternative: glycosomal 1,3-bisphosphoglycerate
  def comp one_three_BPGA_g as
    var one_three_BPGA_g: millimolar {pub: out, init: 0.01};
    var V_GAPDH: flux {pub: in};
    var V_PGK: flux {pub: in};
    var time: second {pub: in};
    ode(one_three_BPGA_g, time) = V_GAPDH-V_PGK;
  enddef;

  // title: three_PGA
  // alternative: 3-phosphoglycerate
  def comp three_PGA as
    var three_PGA: millimolar {pub: out};
    var N: millimolar {pub: in};
    var Vc_Vg: dimensionless {pub: in};
    var Keq_PGM: dimensionless {pub: out, init: 0.187};
    var Keq_ENO: dimensionless {pub: out, init: 6.7};
    three_PGA = N*(1.0{dimensionless}+Vc_Vg)/(1.0{dimensionless}+(1.0{dimensionless}+Keq_PGM+Keq_PGM*Keq_ENO)*Vc_Vg);
  enddef;

  // title: two_PGA_c
  // alternative: cytosolic 2-phosphoglycerate
  def comp two_PGA_c as
    var two_PGA_c: millimolar {pub: out};
    var three_PGA: millimolar {pub: in};
    var Keq_PGM: dimensionless {pub: in};
    two_PGA_c = Keq_PGM*three_PGA;
  enddef;

  // title: N
  // alternative: the sum of 3-phosphoglycerate, 2-phosphoglycerate, and phosphoenolpyruvate
  def comp N as
    var N: millimolar {pub: out, init: 0.01};
    var V_PGK: flux {pub: in};
    var V_PYK: flux {pub: in};
    var time: second {pub: in};
    ode(N, time) = V_PGK-V_PYK;
  enddef;

  // title: PEP_c
  // alternative: cytosolic phosphoenolpyruvate
  def comp PEP_c as
    var PEP_c: millimolar {pub: out};
    var two_PGA_c: millimolar {pub: in};
    var Keq_ENO: dimensionless {pub: in};
    PEP_c = Keq_ENO*two_PGA_c;
  enddef;

  // title: PYR_c
  // alternative: cytosolic pyruvate
  def comp PYR_c as
    var PYR_c: millimolar {pub: out, init: 0.01};
    var V_PYK: flux {pub: in};
    var V_pyruvate_transport: flux {pub: in};
    var time: second {pub: in};
    ode(PYR_c, time) = V_PYK-V_pyruvate_transport;
  enddef;

  // title: glycerol_g
  // alternative: glycosomal glycerol
  def comp glycerol_g as
    var glycerol_g: millimolar {pub: out, init: 0.00};
  enddef;

  // title: DHAP
  // alternative: dihydroxyacetone phosphate
  def comp DHAP as
    var DHAP: millimolar {pub: out};
    var triose_P: millimolar {pub: in};
    var Vc_Vg: dimensionless {pub: in};
    var Keq_TIM: dimensionless {pub: out, init: 0.045};
    DHAP = triose_P*(1.0{dimensionless}+Vc_Vg)/(1.0{dimensionless}+Vc_Vg+Keq_TIM);
  enddef;

  // title: DHAP_c
  // alternative: cytosolic dihydroxyacetone phosphate
  def comp DHAP_c as
    var DHAP_c: millimolar {pub: out};
    var DHAP: millimolar {pub: in};
    DHAP_c = DHAP;
  enddef;

  // title: DHAP_g
  // alternative: glycosomal dihydroxyacetone phosphate
  def comp DHAP_g as
    var DHAP_g: millimolar {pub: out};
    var DHAP: millimolar {pub: in};
    DHAP_g = DHAP;
  enddef;

  // title: Gly_3_P
  // alternative: glyceraldehyde 3-phopshate
  def comp Gly_3_P as
    var Gly_3_P: millimolar {pub: out};
    var DHAP: millimolar {pub: in};
    var Glc_6_P_g: millimolar {pub: in};
    var Fru_6_P_g: millimolar {pub: in};
    var Fru_1_6_BP_g: millimolar {pub: in};
    var GA_3_P_g: millimolar {pub: in};
    var one_three_BPGA_g: millimolar {pub: in};
    var ATP_g: millimolar {pub: in};
    var ADP_g: millimolar {pub: in};
    var C4: millimolar {pub: in};
    var Vc_Vg: dimensionless {pub: in};
    Gly_3_P = (C4-(Glc_6_P_g+Fru_6_P_g+2{dimensionless}*Fru_1_6_BP_g+GA_3_P_g+one_three_BPGA_g+2{dimensionless}*ATP_g+ADP_g))/(1{dimensionless}+Vc_Vg)-DHAP;
  enddef;

  // title: Gly_3_P_c
  // alternative: cytosolic glyceraldehyde 3-phopshate
  def comp Gly_3_P_c as
    var Gly_3_P_c: millimolar {pub: out};
    var Gly_3_P: millimolar {pub: in};
    Gly_3_P_c = Gly_3_P;
  enddef;

  // title: Gly_3_P_g
  // alternative: glycosomal glyceraldehyde 3-phopshate
  def comp Gly_3_P_g as
    var Gly_3_P_g: millimolar {pub: out};
    var Gly_3_P: millimolar {pub: in};
    Gly_3_P_g = Gly_3_P;
  enddef;

  // title: NAD_g
  // alternative: glycosomal nicotinamide adenine dinucleotide positive
  def comp NAD_g as
    var NAD_g: millimolar {pub: out};
    var NADH_g: millimolar {pub: in};
    var C3: millimolar {pub: in};
    NAD_g = C3-NADH_g;
  enddef;

  // title: NADH_g
  // alternative: glycosomal nicotinamide adenine dinucleotide
  def comp NADH_g as
    var NADH_g: millimolar {pub: out, init: 0.01};
    var V_GAPDH: flux {pub: in};
    var V_GDH: flux {pub: in};
    var time: second {pub: in};
    ode(NADH_g, time) = V_GAPDH-V_GDH;
  enddef;

  // title: P_g
  // alternative: total concentration of glycosomal adenosine phosphates
  def comp P_g as
    var P_g: millimolar {pub: out, init: 0.01};
    var V_HK: flux {pub: in};
    var V_PGK: flux {pub: in};
    var V_PFK: flux {pub: in};
    var V_GK: flux {pub: in};
    var time: second {pub: in};
    ode(P_g, time) = V_PGK+V_GK-(V_HK+V_PFK);
  enddef;

  // title: P_c
  // alternative: total concentration of cytosolic adenosine phosphates
  def comp P_c as
    var P_c: millimolar {pub: out, init: 0.01};
    var V_PYK: flux {pub: in};
    var V_ATP_utilisation: flux {pub: in};
    var time: second {pub: in};
    ode(P_c, time) = V_PYK-V_ATP_utilisation;
  enddef;

  // title: ATP_g
  // alternative: glycosomal adenosine triphosphate
  def comp ATP_g as
    var ATP_g: millimolar {pub: out};
    var P_g: millimolar {pub: in};
    var Keq_AK: dimensionless {init: 0.442};
    var C1: millimolar {pub: in};
    ATP_g = (C1-(-(P_g*(1.0{dimensionless}-4.0{dimensionless}*Keq_AK)))+pow(sqr(C1-(-(P_g*(1.0{dimensionless}-4.0{dimensionless}*Keq_AK))))-4.0{dimensionless}*(1.0{dimensionless}-4.0{dimensionless}*Keq_AK)*(-Keq_AK*sqr(P_g)), 0.5{dimensionless}))/(2.0{dimensionless}*(1.0{dimensionless}-4.0{dimensionless}*Keq_AK));
  enddef;

  // title: ATP_c
  // alternative: cytosolic adenosine triphosphate
  def comp ATP_c as
    var ATP_c: millimolar {pub: out};
    var P_c: millimolar {pub: in};
    var Keq_AK: dimensionless {init: 0.442};
    var C2: millimolar {pub: in};
    ATP_c = (C2-(-(P_c*(1.0{dimensionless}-4.0{dimensionless}*Keq_AK)))+pow(sqr(C2-(-(P_c*(1.0{dimensionless}-4.0{dimensionless}*Keq_AK))))-4.0{dimensionless}*(1.0{dimensionless}-4.0{dimensionless}*Keq_AK)*(-Keq_AK*sqr(P_c)), 0.5{dimensionless}))/(2.0{dimensionless}*(1.0{dimensionless}-4.0{dimensionless}*Keq_AK));
  enddef;

  // title: ADP_g
  // alternative: glycosomal adenosine diphosphate
  def comp ADP_g as
    var ADP_g: millimolar {pub: out};
    var ATP_g: millimolar {pub: in};
    var P_g: millimolar {pub: in};
    ADP_g = P_g-2.0{dimensionless}*ATP_g;
  enddef;

  // title: ADP_c
  // alternative: cytosolic adenosine diphosphate
  def comp ADP_c as
    var ADP_c: millimolar {pub: out};
    var ATP_c: millimolar {pub: in};
    var P_c: millimolar {pub: in};
    ADP_c = P_c-2.0{dimensionless}*ATP_c;
  enddef;

  // title: AMP_g
  // alternative: glycosomal adenosine monophosphate
  def comp AMP_g as
    var AMP_g: millimolar {pub: out};
    var ATP_g: millimolar {pub: in};
    var ADP_g: millimolar {pub: in};
    var C1: millimolar {pub: in};
    AMP_g = C1-(ATP_g+ADP_g);
  enddef;

  // title: AMP_c
  // alternative: cytosolic adenosine monophosphate
  def comp AMP_c as
    var AMP_c: millimolar {pub: out};
    var ATP_c: millimolar {pub: in};
    var ADP_c: millimolar {pub: in};
    var C2: millimolar {pub: in};
    AMP_c = C2-(ATP_c+ADP_c);
  enddef;

  def comp C1 as
    var C1: millimolar {pub: out, init: 3.9};
  enddef;

  def comp C2 as
    var C2: millimolar {pub: out, init: 3.9};
  enddef;

  def comp C3 as
    var C3: millimolar {pub: out, init: 4.0};
  enddef;

  def comp C4 as
    var C4: millimolar {pub: out, init: 120.0};
  enddef;

  def comp V_glucose_transport as
    var V_glucose_transport: flux {pub: out};
    var Glc_o: millimolar {pub: in};
    var Glc_i: millimolar {pub: in};
    var K_Glc: millimolar {init: 2.0};
    var alpha: dimensionless {init: 0.75};
    var V_glucose_transport_max: flux {init: 106.2};
    V_glucose_transport = V_glucose_transport_max*((Glc_o-Glc_i)/(K_Glc+Glc_o+Glc_i+alpha*Glc_o*(Glc_i/K_Glc)));
  enddef;

  def comp V_pyruvate_transport as
    var V_pyruvate_transport: flux {pub: out};
    var PYR_c: millimolar {pub: in};
    var K_pyruvate: millimolar {init: 1.96};
    var V_pyruvate_transport_max: flux {init: 160.0};
    V_pyruvate_transport = V_pyruvate_transport_max*(PYR_c/K_pyruvate)*(1.0{dimensionless}+PYR_c/K_pyruvate);
  enddef;

  def comp V_GPO as
    var V_GPO: flux {pub: out};
    var Gly_3_P_c: millimolar {pub: in};
    var K_Gly_3_P: millimolar {init: 1.7};
    var V_GPO_max: flux {init: 200.0};
    V_GPO = V_GPO_max*(Gly_3_P_c/K_Gly_3_P)*(1.0{dimensionless}+Gly_3_P_c/K_Gly_3_P);
  enddef;

  def comp V_HK as
    var V_HK: flux {pub: out};
    var Glc_i: millimolar {pub: in};
    var ATP_g: millimolar {pub: in};
    var ADP_g: millimolar {pub: in};
    var K_Glc_i: millimolar {init: 0.1};
    var K_ATP: millimolar {init: 0.116};
    var K_ADP: millimolar {init: 0.126};
    var V_HK_max: flux {init: 625.0};
    V_HK = V_HK_max*(ATP_g/K_ATP*(Glc_i/K_Glc_i)/((1.0{dimensionless}+ATP_g/K_ATP+ADP_g/K_ADP)*(1.0{dimensionless}+Glc_i/K_Glc_i)));
  enddef;

  def comp V_GAPDH as
    var V_GAPDH: flux {pub: out};
    var NAD_g: millimolar {pub: in};
    var GA_3_P_g: millimolar {pub: in};
    var one_three_BPGA_g: millimolar {pub: in};
    var NADH_g: millimolar {pub: in};
    var K_NAD: millimolar {init: 0.45};
    var K_GA_3_P: millimolar {init: 0.15};
    var K_1_3_BPGA: millimolar {init: 0.1};
    var K_NADH: millimolar {init: 0.02};
    var V_GAPDH_max_plus: flux {init: 1470.0};
    var V_GAPDH_max_ratio: dimensionless {init: 0.67};
    V_GAPDH = V_GAPDH_max_plus*(GA_3_P_g/K_GA_3_P*(NAD_g/K_NAD-V_GAPDH_max_ratio)*(one_three_BPGA_g/K_1_3_BPGA)*(NADH_g/K_NADH)/((1.0{dimensionless}+GA_3_P_g/K_GA_3_P+one_three_BPGA_g/K_1_3_BPGA)*(1.0{dimensionless}+NAD_g/K_NAD+NADH_g/K_NADH)));
  enddef;

  def comp V_PGK as
    var V_PGK: flux {pub: out};
    var ADP_g: millimolar {pub: in};
    var one_three_BPGA_g: millimolar {pub: in};
    var three_PGA: millimolar {pub: in};
    var ATP_g: millimolar {pub: in};
    var K_ADP: millimolar {init: 0.1};
    var K_1_3_BPGA: millimolar {init: 0.05};
    var K_3_PGA: millimolar {init: 1.62};
    var K_ATP: millimolar {init: 0.29};
    var V_PGK_max_plus: flux {init: 640.0};
    var V_PGK_max_ratio: dimensionless {init: 0.029};
    V_PGK = V_PGK_max_plus*(one_three_BPGA_g/K_1_3_BPGA*(ADP_g/K_ADP-V_PGK_max_ratio)*(three_PGA/K_3_PGA)*(ATP_g/K_ATP)/((1.0{dimensionless}+one_three_BPGA_g/K_1_3_BPGA+three_PGA/K_3_PGA)*(1.0{dimensionless}+ADP_g/K_ADP+ATP_g/K_ATP)));
  enddef;

  def comp V_GK as
    var V_GK: flux {pub: out};
    var ADP_g: millimolar {pub: in};
    var Gly_3_P_g: millimolar {pub: in};
    var glycerol_g: millimolar {pub: in};
    var ATP_g: millimolar {pub: in};
    var K_ADP: millimolar {init: 0.12};
    var K_Gly_3_P: millimolar {init: 5.1};
    var K_glycerol: millimolar {init: 0.12};
    var K_ATP: millimolar {init: 0.19};
    var V_GK_max_plus: flux {init: 0.0};
    var V_GK_max_ratio: dimensionless {init: 167.0};
    V_GK = V_GK_max_plus*(Gly_3_P_g/K_Gly_3_P*(ADP_g/K_ADP-V_GK_max_ratio)*(glycerol_g/K_glycerol)*(ATP_g/K_ATP)/((1.0{dimensionless}+Gly_3_P_g/K_Gly_3_P+glycerol_g/K_glycerol)*(1.0{dimensionless}+ADP_g/K_ADP+ATP_g/K_ATP)));
  enddef;

  def comp V_GDH as
    var V_GDH: flux {pub: out};
    var NADH_g: millimolar {pub: in};
    var Gly_3_P_g: millimolar {pub: in};
    var DHAP_g: millimolar {pub: in};
    var NAD_g: millimolar {pub: in};
    var K_NADH: millimolar {init: 0.01};
    var K_Gly_3_P: millimolar {init: 2.0};
    var K_DHAP: millimolar {init: 0.1};
    var K_NAD: millimolar {init: 0.4};
    var V_GDH_max_plus: flux {init: 533.0};
    var V_GDH_max_ratio: dimensionless {init: 0.28};
    V_GDH = V_GDH_max_plus*(DHAP_g/K_DHAP*(NADH_g/K_NADH-V_GDH_max_ratio)*(Gly_3_P_g/K_Gly_3_P)*(NAD_g/K_NAD)/((1.0{dimensionless}+DHAP_g/K_DHAP+Gly_3_P_g/K_Gly_3_P)*(1.0{dimensionless}+NADH_g/K_NADH+NAD_g/K_NAD)));
  enddef;

  def comp V_PFK as
    var V_PFK: flux {pub: out};
    var Fru_6_P_g: millimolar {pub: in};
    var ATP_g: millimolar {pub: in};
    var n: dimensionless {init: 1.2};
    var Km_Fru_6_P: millimolar {init: 0.82};
    var Km_ATP: millimolar {init: 2.6E-2};
    var V_PFK_max: flux {init: 780.0};
    V_PFK = V_PFK_max*(pow(Fru_6_P_g/Km_Fru_6_P, n)*(ATP_g/Km_ATP)/((1.0{dimensionless}+pow(Fru_6_P_g/Km_Fru_6_P, n))*(1.0{dimensionless}+ATP_g/Km_ATP)));
  enddef;

  def comp V_PYK as
    var V_PYK: flux {pub: out};
    var PEP_c: millimolar {pub: in};
    var ADP_c: millimolar {pub: in};
    var ATP_c: millimolar {pub: in};
    var Km_PEP: millimolar;
    var Km_ADP: millimolar {init: 0.114};
    var n: dimensionless {init: 2.5};
    var V_PYK_max: flux {init: 2.6E3};
    V_PYK = V_PYK_max*(pow(PEP_c/Km_PEP, n)*(ADP_c/Km_ADP)/((1.0{dimensionless}+pow(PEP_c/Km_PEP, n))*(1.0{dimensionless}+ADP_c/Km_ADP)));
    Km_PEP = 0.34{millimolar}*(1.0{dimensionless}+ATP_c/0.57{millimolar}+ADP_c/0.64{millimolar});
  enddef;

  def comp V_ALD as
    var V_ALD: flux {pub: out};
    var Fru_1_6_BP_g: millimolar {pub: in};
    var GA_3_P_g: millimolar {pub: in};
    var DHAP_g: millimolar {pub: in};
    var ATP_g: millimolar {pub: in};
    var ADP_g: millimolar {pub: in};
    var AMP_g: millimolar {pub: in};
    var Km_Fru_1_6_BP: millimolar;
    var Km_GA_3_P: millimolar {init: 6.7E-2};
    var Ki_GA_3_P: millimolar {init: 9.8E-2};
    var Km_DHAP: millimolar {init: 1.5E-2};
    var V_ALD_max_plus: flux {init: 780.0};
    var V_ALD_max_ratio: dimensionless {init: 1.19};
    V_ALD = V_ALD_max_plus*((Fru_1_6_BP_g/Km_Fru_1_6_BP-V_ALD_max_ratio*(GA_3_P_g*DHAP_g/(Km_GA_3_P*Km_DHAP)))/(1.0{dimensionless}+Fru_1_6_BP_g/Km_Fru_1_6_BP+GA_3_P_g/Km_GA_3_P+DHAP_g/Km_DHAP+Fru_1_6_BP_g*GA_3_P_g/(Km_Fru_1_6_BP*Ki_GA_3_P)+DHAP_g*GA_3_P_g/(Km_DHAP*Km_GA_3_P)));
    Km_Fru_1_6_BP = 9e-3{millimolar}*(1.0{dimensionless}+ATP_g/0.68{millimolar}+ADP_g/1.51{millimolar}+AMP_g/3.65{millimolar});
  enddef;

  def comp V_ATP_utilisation as
    var V_ATP_utilisation: flux {pub: out};
    var ATP_c: millimolar {pub: in};
    var ADP_c: millimolar {pub: in};
    var k: flux {init: 50};
    V_ATP_utilisation = k*(ATP_c/ADP_c);
  enddef;
  def map between Glc_o and V_glucose_transport for
    vars Glc_o and Glc_o;
  enddef;
  def map between Glc_i and V_glucose_transport for
    vars Glc_i and Glc_i;
    vars V_glucose_transport and V_glucose_transport;
  enddef;
  def map between Glc_i and V_HK for
    vars Glc_i and Glc_i;
    vars V_HK and V_HK;
  enddef;
  def map between hexose_P_g and V_HK for
    vars V_HK and V_HK;
  enddef;
  def map between Fru_6_P_g and V_PFK for
    vars Fru_6_P_g and Fru_6_P_g;
  enddef;
  def map between hexose_P_g and V_PFK for
    vars V_PFK and V_PFK;
  enddef;
  def map between Fru_1_6_BP_g and V_PFK for
    vars V_PFK and V_PFK;
  enddef;
  def map between Fru_1_6_BP_g and V_ALD for
    vars Fru_1_6_BP_g and Fru_1_6_BP_g;
    vars V_ALD and V_ALD;
  enddef;
  def map between DHAP_g and V_ALD for
    vars DHAP_g and DHAP_g;
  enddef;
  def map between DHAP_g and V_GDH for
    vars DHAP_g and DHAP_g;
  enddef;
  def map between triose_P and V_ALD for
    vars V_ALD and V_ALD;
  enddef;
  def map between triose_P and V_GAPDH for
    vars V_GAPDH and V_GAPDH;
  enddef;
  def map between triose_P and V_GDH for
    vars V_GDH and V_GDH;
  enddef;
  def map between triose_P and V_GPO for
    vars V_GPO and V_GPO;
  enddef;
  def map between GA_3_P_g and V_ALD for
    vars GA_3_P_g and GA_3_P_g;
  enddef;
  def map between GA_3_P_g and V_GAPDH for
    vars GA_3_P_g and GA_3_P_g;
  enddef;
  def map between Gly_3_P_g and V_GDH for
    vars Gly_3_P_g and Gly_3_P_g;
  enddef;
  def map between Gly_3_P_g and V_GK for
    vars Gly_3_P_g and Gly_3_P_g;
  enddef;
  def map between one_three_BPGA_g and V_GAPDH for
    vars one_three_BPGA_g and one_three_BPGA_g;
    vars V_GAPDH and V_GAPDH;
  enddef;
  def map between one_three_BPGA_g and V_PGK for
    vars one_three_BPGA_g and one_three_BPGA_g;
    vars V_PGK and V_PGK;
  enddef;
  def map between PEP_c and V_PYK for
    vars PEP_c and PEP_c;
  enddef;
  def map between N and V_PGK for
    vars V_PGK and V_PGK;
  enddef;
  def map between N and V_PYK for
    vars V_PYK and V_PYK;
  enddef;
  def map between PYR_c and V_PYK for
    vars V_PYK and V_PYK;
  enddef;
  def map between PYR_c and V_pyruvate_transport for
    vars PYR_c and PYR_c;
    vars V_pyruvate_transport and V_pyruvate_transport;
  enddef;
  def map between P_g and V_HK for
    vars V_HK and V_HK;
  enddef;
  def map between P_g and V_PFK for
    vars V_PFK and V_PFK;
  enddef;
  def map between P_g and V_PGK for
    vars V_PGK and V_PGK;
  enddef;
  def map between P_g and V_GK for
    vars V_GK and V_GK;
  enddef;
  def map between P_c and V_PYK for
    vars V_PYK and V_PYK;
  enddef;
  def map between P_c and V_ATP_utilisation for
    vars V_ATP_utilisation and V_ATP_utilisation;
  enddef;
  def map between Glc_i and environment for
    vars time and time;
  enddef;
  def map between Fru_1_6_BP_g and environment for
    vars time and time;
  enddef;
  def map between one_three_BPGA_g and environment for
    vars time and time;
  enddef;
  def map between PYR_c and environment for
    vars time and time;
  enddef;
  def map between NADH_g and environment for
    vars time and time;
  enddef;
  def map between hexose_P_g and environment for
    vars time and time;
  enddef;
  def map between triose_P and environment for
    vars time and time;
  enddef;
  def map between N and environment for
    vars time and time;
  enddef;
  def map between P_c and environment for
    vars time and time;
  enddef;
  def map between P_g and environment for
    vars time and time;
  enddef;
  def map between Fru_6_P_g and Glc_6_P_g for
    vars Fru_6_P_g and Fru_6_P_g;
    vars Glc_6_P_g and Glc_6_P_g;
  enddef;
  def map between hexose_P_g and Glc_6_P_g for
    vars hexose_P_g and hexose_P_g;
  enddef;
  def map between hexose_P_g and Fru_6_P_g for
    vars hexose_P_g and hexose_P_g;
  enddef;
  def map between DHAP_c and DHAP for
    vars DHAP and DHAP;
  enddef;
  def map between DHAP_g and DHAP for
    vars DHAP and DHAP;
  enddef;
  def map between GA_3_P_g and DHAP_g for
    vars DHAP_g and DHAP_g;
  enddef;
  def map between GA_3_P_g and DHAP for
    vars Keq_TIM and Keq_TIM;
  enddef;
  def map between triose_P and DHAP for
    vars triose_P and triose_P;
  enddef;
  def map between Gly_3_P_c and Gly_3_P for
    vars Gly_3_P and Gly_3_P;
  enddef;
  def map between Gly_3_P_g and Gly_3_P for
    vars Gly_3_P and Gly_3_P;
  enddef;
  def map between DHAP and Gly_3_P for
    vars DHAP and DHAP;
  enddef;
  def map between Glc_6_P_g and Gly_3_P for
    vars Glc_6_P_g and Glc_6_P_g;
  enddef;
  def map between Fru_6_P_g and Gly_3_P for
    vars Fru_6_P_g and Fru_6_P_g;
  enddef;
  def map between Fru_1_6_BP_g and Gly_3_P for
    vars Fru_1_6_BP_g and Fru_1_6_BP_g;
  enddef;
  def map between GA_3_P_g and Gly_3_P for
    vars GA_3_P_g and GA_3_P_g;
  enddef;
  def map between one_three_BPGA_g and Gly_3_P for
    vars one_three_BPGA_g and one_three_BPGA_g;
  enddef;
  def map between ATP_g and Gly_3_P for
    vars ATP_g and ATP_g;
  enddef;
  def map between ADP_g and Gly_3_P for
    vars ADP_g and ADP_g;
  enddef;
  def map between C4 and Gly_3_P for
    vars C4 and C4;
  enddef;
  def map between volume_ratio and Gly_3_P for
    vars Vc_Vg and Vc_Vg;
  enddef;
  def map between N and three_PGA for
    vars N and N;
  enddef;
  def map between three_PGA and two_PGA_c for
    vars three_PGA and three_PGA;
    vars Keq_PGM and Keq_PGM;
  enddef;
  def map between two_PGA_c and PEP_c for
    vars two_PGA_c and two_PGA_c;
  enddef;
  def map between three_PGA and PEP_c for
    vars Keq_ENO and Keq_ENO;
  enddef;
  def map between Gly_3_P_c and V_GPO for
    vars Gly_3_P_c and Gly_3_P_c;
  enddef;
  def map between NAD_g and NADH_g for
    vars NADH_g and NADH_g;
  enddef;
  def map between NAD_g and C3 for
    vars C3 and C3;
  enddef;
  def map between NADH_g and V_GAPDH for
    vars V_GAPDH and V_GAPDH;
    vars NADH_g and NADH_g;
  enddef;
  def map between NADH_g and V_GDH for
    vars V_GDH and V_GDH;
    vars NADH_g and NADH_g;
  enddef;
  def map between ATP_g and C1 for
    vars C1 and C1;
  enddef;
  def map between ATP_c and C2 for
    vars C2 and C2;
  enddef;
  def map between P_g and ATP_g for
    vars P_g and P_g;
  enddef;
  def map between ATP_g and ADP_g for
    vars ATP_g and ATP_g;
  enddef;
  def map between P_g and ADP_g for
    vars P_g and P_g;
  enddef;
  def map between ATP_g and AMP_g for
    vars ATP_g and ATP_g;
  enddef;
  def map between ADP_g and AMP_g for
    vars ADP_g and ADP_g;
  enddef;
  def map between AMP_g and C1 for
    vars C1 and C1;
  enddef;
  def map between ATP_c and ADP_c for
    vars ATP_c and ATP_c;
  enddef;
  def map between P_c and ATP_c for
    vars P_c and P_c;
  enddef;
  def map between P_c and ADP_c for
    vars P_c and P_c;
  enddef;
  def map between ATP_c and AMP_c for
    vars ATP_c and ATP_c;
  enddef;
  def map between ADP_c and AMP_c for
    vars ADP_c and ADP_c;
  enddef;
  def map between AMP_c and C2 for
    vars C2 and C2;
  enddef;
  def map between ATP_g and V_HK for
    vars ATP_g and ATP_g;
  enddef;
  def map between ATP_g and V_GK for
    vars ATP_g and ATP_g;
  enddef;
  def map between ATP_c and V_PYK for
    vars ATP_c and ATP_c;
  enddef;
  def map between ATP_g and V_ALD for
    vars ATP_g and ATP_g;
  enddef;
  def map between ATP_c and V_ATP_utilisation for
    vars ATP_c and ATP_c;
  enddef;
  def map between ADP_c and V_ATP_utilisation for
    vars ADP_c and ADP_c;
  enddef;
  def map between ADP_g and V_HK for
    vars ADP_g and ADP_g;
  enddef;
  def map between ADP_g and V_ALD for
    vars ADP_g and ADP_g;
  enddef;
  def map between AMP_g and V_ALD for
    vars AMP_g and AMP_g;
  enddef;
  def map between ADP_g and V_PGK for
    vars ADP_g and ADP_g;
  enddef;
  def map between ADP_g and V_GK for
    vars ADP_g and ADP_g;
  enddef;
  def map between ADP_c and V_PYK for
    vars ADP_c and ADP_c;
  enddef;
  def map between glycerol_g and V_GK for
    vars glycerol_g and glycerol_g;
  enddef;
  def map between ATP_g and V_PGK for
    vars ATP_g and ATP_g;
  enddef;
  def map between ATP_g and V_PFK for
    vars ATP_g and ATP_g;
  enddef;
  def map between NAD_g and V_GAPDH for
    vars NAD_g and NAD_g;
  enddef;
  def map between three_PGA and V_PGK for
    vars three_PGA and three_PGA;
  enddef;
  def map between NAD_g and V_GDH for
    vars NAD_g and NAD_g;
  enddef;
  def map between volume_ratio and three_PGA for
    vars Vc_Vg and Vc_Vg;
  enddef;
  def map between volume_ratio and DHAP for
    vars Vc_Vg and Vc_Vg;
  enddef;
enddef;
