// This CellML file was generated on 17/12/2009 at 1:55:34 at p.m. using:
//
// COR (0.9.31.1333)
// Copyright 2002-2009 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// creator: Family Nunns; Given Geoffrey; gnunns@gmail.com; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2009-12-17
// reference: subject_type keyword; cardiac; mitochondria; metabolism
// reference: Pubmed_id 16163394; Family Beard; Given D; Other A; title A biophysical model of the mitochondrial respiratory system and oxidative phosphorylation; W3CDTF 2005-09; title PLoS computational biology; volume 1; first_page e36
def model beard_2005 as
  // A Biophysical Model of the Mitochondrial Respiratory System and Oxidative Phosphorylation, Beard, 2005
  //
  // David Nickerson
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This model has been edited to correct dimensional errors and checked for other problems. It runs in COR and OpenCell to replicate results from the original matlab code. It was based on the original matlab code provided by the model authors.
  //
  // Model Structure
  //
  // ABSTRACT: A computational model for the mitochondrial respiratory chain that appropriately balances mass, charge, and free energy transduction is introduced and analyzed based on a previously published set of data measured on isolated cardiac mitochondria. The basic components included in the model are the reactions at complexes I, III, and IV of the electron transport system, ATP synthesis at F1F0 ATPase, substrate transporters including adenine nucleotide translocase and the phosphate\u2013hydrogen co-transporter, and cation fluxes across the inner membrane including fluxes through the K+/H+ antiporter and passive H+ and K+ permeation. Estimation of 16 adjustable parameter values is based on fitting model simulations to nine independent data curves. The identified model is further validated by comparison to additional datasets measured from mitochondria isolated from rat heart and liver and observed at low oxygen concentration. To obtain reasonable fits to the available data, it is necessary to incorporate inorganic-phosphate-dependent activation of the dehydrogenase activity and the electron transport system. Specifically, it is shown that a model incorporating phosphate-dependent activation of complex III is able to reasonably reproduce the observed data. The resulting validated and verified model provides a foundation for building larger and more complex systems models and investigating complex physiological and pathophysiological interactions in cardiac energetics.
  //
  // The original paper reference is cited below:
  //
  // A Biophysical Model of the Mitochondrial Respiratory System and Oxidative Phosphorylation, Daniel A. Beard, 2005, PLoS Computational Biology , September 9, 1(4). PubMed ID: 16163394 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=16163394&dopt=Citation)
  //
  // Illustration of the Components Included in the Model of Mitochondrial Oxidative Phosphorylation:
  //
  // model diagram
  //
  // A) Schematic diagram of the major components of the electron transport system, which transfers reducing potential from NADH to oxygen, and the F1F0 ATPase, which transduces energy from proton motive force to ATP, are illustrated. Complexes I, III, and IV are labeled C1, C3, and C4, respectively.
  //
  // model diagram
  //
  // B) Schematic diagram of the substrate transport process included in the model, including the ANT and PiHt on the inner membrane, and passive permeation of ATP, ADP, AMP, and phosphate across the outer membrane. The AK reaction in the IM space is shown.
  //
  // model diagram
  //
  // C) Schematic diagram of the transporters for hydrogen and potassium ions on the inner membrane, including K+/H+ antiporter and passive proton and potassium fluxes. It is assumed that these cations rapidly equilibrate across the outer membrane.
  def unit cell as base unit;
  def unit cytoplasm as base unit;
  def unit mitochondria as base unit;
  def unit cyto_per_cell as
    unit cytoplasm;
    unit cell {expo: -1};
  enddef;
  def unit mito_per_cell as
    unit mitochondria;
    unit cell {expo: -1};
  enddef;
  def unit l_cyto_per_l_mito as
    unit cytoplasm;
    unit mitochondria {expo: -1};
  enddef;
  def unit l_water_per_l_mito as
    unit mitochondria {expo: -1};
  enddef;
  def unit mg_per_mitochondria as
    unit gram {pref: milli};
    unit mitochondria {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit liter {expo: -1};
  enddef;
  def unit molar_per_second as
    unit molar;
    unit second {expo: -1};
  enddef;
  def unit molar_squared as
    unit molar {expo: 2};
  enddef;
  def unit molar_cubed as
    unit molar {expo: 3};
  enddef;
  def unit micromolar as
    unit molar {pref: micro};
  enddef;
  def unit per_molar as
    unit molar {expo: -1};
  enddef;
  def unit micron_per_second as
    unit metre {pref: -6};
    unit second {expo: -1};
  enddef;
  def unit per_micron as
    unit metre {expo: -1, pref: -6};
    unit mitochondria {expo: -1};
  enddef;
  def unit kilojoule_per_mole as
    unit joule {pref: kilo};
    unit mole {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit kilojoule_per_mole_per_millivolt as
    unit kilojoule_per_mole;
    unit millivolt {expo: -1};
  enddef;
  def unit molar_per_cyto as
    unit mole;
    unit liter {expo: -1};
    unit mitochondria {expo: -1};
  enddef;
  def unit molar_per_mito as
    unit mole;
    unit liter {expo: -1};
    unit mitochondria {expo: -1};
  enddef;
  def unit mole_per_second_per_l_cyto as
    unit molar_per_cyto;
    unit second {expo: -1};
  enddef;
  def unit mole_per_second_per_l_mito as
    unit molar_per_mito;
    unit second {expo: -1};
  enddef;
  def unit mole_per_second_per_l_mito_per_molar as
    unit mole_per_second_per_l_mito;
    unit molar {expo: -1};
  enddef;
  def unit mole_per_second_per_l_mito_per_molar_per_half_molar as
    unit mole_per_second_per_l_mito_per_molar;
    unit molar {expo: -0.5};
  enddef;
  def unit mole_per_second_per_l_mito_per_molar_per_molar as
    unit mole_per_second_per_l_mito_per_molar;
    unit molar {expo: -1};
  enddef;
  def unit mole_per_l_mito_per_millivolt as
    unit molar_per_cyto;
    unit millivolt {expo: -1};
  enddef;
  def unit mole_per_second_per_l_mito_per_molar_per_millivolt as
    unit mole_per_second_per_l_mito_per_molar;
    unit millivolt {expo: -1};
  enddef;

  def comp Environment as
    var t: second {pub: out};
    var Mg_tot: molar {init: 0.005, pub: out};
    var Pi_e: molar {init: 0.000125, pub: out};
    var ADP_e: molar {init: 0, pub: out};
  enddef;

  def comp Fixed_parameters as
    var RT: kilojoule_per_mole {init: 2.4734, pub: out};
    var F: kilojoule_per_mole_per_millivolt {init: 0.096484, pub: out};
    var n_A: dimensionless {init: 3, pub: out};
    var dG_C1o: kilojoule_per_mole {init: -69.37, pub: out};
    var dG_C3o: kilojoule_per_mole {init: -32.53, pub: out};
    var dG_C4o: kilojoule_per_mole {init: -122.94, pub: out};
    var dG_F1o: kilojoule_per_mole {init: 36.03, pub: out};
    var pH_e: dimensionless {init: 7.1, pub: out};
    var H_e: molar {pub: out};
    var K_e: molar {init: 0.15, pub: out};
    var ATP_e: molar {init: 0, pub: out};
    var AMP_e: molar {init: 0, pub: out};
    var k_dHPi: molar {pub: out};
    var k_dHatp: molar {pub: out};
    var k_dHadp: molar {pub: out};
    var K_DT: molar {init: 2.4e-5, pub: out};
    var K_DD: molar {init: 3.47e-4, pub: out};
    var K_AK: dimensionless {init: 0.4331, pub: out};
    var W_m: l_water_per_l_mito {init: 0.72376, pub: out};
    var W_x: l_water_per_l_mito {pub: out};
    var W_i: l_water_per_l_mito {pub: out};
    var gamma: per_micron {init: 5.99, pub: out};
    var Ctot: molar {init: 0.0027, pub: out};
    var Qtot: molar {init: 0.00135, pub: out};
    var NADtot: molar {init: 0.00297, pub: out};
    var H_i: molar {pub: out};
    var K_i: molar {pub: out};
    H_e = 1{molar}*pow(10{dimensionless}, -pH_e);
    W_x = 0.9{dimensionless}*W_m;
    W_i = 0.1{dimensionless}*W_m;
    H_i = H_e;
    K_i = K_e;
    k_dHPi = 1{molar}*pow(10{dimensionless}, -6.75{dimensionless});
    k_dHatp = 1{molar}*pow(10{dimensionless}, -6.48{dimensionless});
    k_dHadp = 1{molar}*pow(10{dimensionless}, -6.29{dimensionless});
  enddef;

  def comp Adjustable_parameters as
    var k_Pi1: molar {init: 1.3413e-4, pub: out};
    var k_Pi2: molar {init: 6.7668e-4, pub: out};
    var k_Pi3: molar {init: 1.9172e-4, pub: out};
    var k_Pi4: molar {init: 0.02531, pub: out};
    var k_PiH: molar {init: 4.5082e-4, pub: out};
    var r: dimensionless {init: 4.5807, pub: out};
    var x_DH: mole_per_second_per_l_mito_per_molar {init: 0.09183, pub: out};
    var x_C1: mole_per_second_per_l_mito_per_molar {init: 0.36923, pub: out};
    var x_C3: mole_per_second_per_l_mito_per_molar {init: 0.091737, pub: out};
    var x_C4: mole_per_second_per_l_mito_per_molar {init: 3.2562e-5, pub: out};
    var x_F1: mole_per_second_per_l_mito_per_molar_per_molar {init: 150.93, pub: out};
    var x_ANT: mole_per_second_per_l_mito {init: 0.0079204, pub: out};
    var x_Pi1: mole_per_second_per_l_mito_per_molar {init: 339430, pub: out};
    var x_KH: mole_per_second_per_l_mito_per_molar_per_molar {init: 2.9802e7, pub: out};
    var x_Hle: mole_per_second_per_l_mito_per_molar_per_millivolt {init: 250, pub: out};
    var x_K: mole_per_second_per_l_mito_per_molar_per_millivolt {init: 0, pub: out};
    var k_mADP: molar {init: 3.5e-6, pub: out};
    var x_AK: mole_per_second_per_l_mito_per_molar_per_molar {init: 0, pub: out};
    var p_A: micron_per_second {init: 85, pub: out};
    var k_O2: molar {init: 1.2e-4, pub: out};
    var x_buff: per_molar {init: 100, pub: out};
    var x_MgA: mole_per_second_per_l_mito_per_molar_per_molar {init: 1000000, pub: out};
    var x_Pi2: micron_per_second {init: 327, pub: out};
  enddef;

  def comp Proton_motive_force as
    var dG_H: kilojoule_per_mole {pub: out};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var dPsi: millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var H_i: molar {pub: in};
    var H_x: molar {pub: in};
    dG_H = F*dPsi+RT*ln(H_i/H_x);
  enddef;

  def comp Dehydrogenase_flux as
    var J_DH: mole_per_second_per_l_mito {pub: out};
    var x_DH: mole_per_second_per_l_mito_per_molar {pub: in};
    var k_Pi1: molar {pub: in};
    var k_Pi2: molar {pub: in};
    var r: dimensionless {pub: in};
    var NAD_x: molar {pub: in};
    var NADH_x: molar {pub: in};
    var Pi_x: molar {pub: in};
    J_DH = x_DH*(r*NAD_x-NADH_x)*(1{dimensionless}+Pi_x/k_Pi1)/(1{dimensionless}+Pi_x/k_Pi2);
  enddef;

  def comp Electron_flux_complex_I as
    var J_C1: mole_per_second_per_l_mito {pub: out};
    var x_C1: mole_per_second_per_l_mito_per_molar {pub: in};
    var dG_C1op: kilojoule_per_mole;
    var dG_C1o: kilojoule_per_mole {pub: in};
    var NADH_x: molar {pub: in};
    var NAD_x: molar {pub: in};
    var dG_H: kilojoule_per_mole {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var Q: molar {pub: in};
    var QH2: molar {pub: in};
    var H_x: molar {pub: in};
    dG_C1op = dG_C1o-RT*ln(H_x/1e-7{molar})-RT*ln(Q/QH2);
    J_C1 = x_C1*(exp(-(dG_C1op+4{dimensionless}*dG_H)/RT)*NADH_x-NAD_x);
  enddef;

  def comp Electron_flux_complex_III as
    var J_C3: mole_per_second_per_l_mito {pub: out};
    var k_Pi3: molar {pub: in};
    var k_Pi4: molar {pub: in};
    var x_C3: mole_per_second_per_l_mito_per_molar {pub: in};
    var dG_C3op: kilojoule_per_mole;
    var dG_C3o: kilojoule_per_mole {pub: in};
    var dG_H: kilojoule_per_mole {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var dPsi: millivolt {pub: in};
    var Cox: molar {pub: in};
    var Cred: molar {pub: in};
    var Q: molar {pub: in};
    var QH2: molar {pub: in};
    var H_x: molar {pub: in};
    var Pi_x: molar {pub: in};
    dG_C3op = dG_C3o+2{dimensionless}*RT*ln(H_x/1e-7{molar})-RT*ln(QH2/Q);
    J_C3 = x_C3*(1{dimensionless}+Pi_x/k_Pi3)/(1{dimensionless}+Pi_x/k_Pi4)*(exp(-(dG_C3op+4{dimensionless}*dG_H-2{dimensionless}*F*dPsi)/(2{dimensionless}*RT))*Cox-Cred);
  enddef;

  def comp Electron_flux_complex_IV as
    var J_C4: mole_per_second_per_l_mito {pub: out};
    var k_O2: molar {pub: in};
    var x_C4: mole_per_second_per_l_mito_per_molar {pub: in};
    var dG_C4op: kilojoule_per_mole;
    var dG_C4o: kilojoule_per_mole {pub: in};
    var Cred: molar {pub: in};
    var Ctot: molar {pub: in};
    var O2: molar {pub: in};
    var dG_H: kilojoule_per_mole {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var Cox: molar {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var dPsi: millivolt {pub: in};
    var H_x: molar {pub: in};
    dG_C4op = dG_C4o-2{dimensionless}*RT*ln(H_x/1e-7{molar})-RT/2{dimensionless}*ln(O2/1{molar});
    J_C4 = x_C4*1{dimensionless}/(1{dimensionless}+k_O2/O2)*Cred/Ctot*(exp(-(dG_C4op+2{dimensionless}*dG_H)/(2{dimensionless}*RT))*Cred-Cox*exp(F*dPsi/RT));
  enddef;

  def comp ATP_synthesis_flux as
    var J_F1: mole_per_second_per_l_mito {pub: out};
    var x_F1: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var dG_F1o: kilojoule_per_mole {pub: in};
    var K_DD: molar {pub: in};
    var K_DT: molar {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var n_A: dimensionless {pub: in};
    var dG_H: kilojoule_per_mole {pub: in};
    var ADP_mx: molar {pub: in};
    var Pi_x: molar {pub: in};
    var ATP_mx: molar {pub: in};
    J_F1 = x_F1*(exp(-(dG_F1o-n_A*dG_H)/RT)*K_DD/K_DT*ADP_mx*Pi_x-ATP_mx*1{molar});
  enddef;

  def comp ANT_flux as
    var J_ANT: mole_per_second_per_l_mito {pub: out};
    var Psi_x: millivolt {pub: out};
    var Psi_i: millivolt {pub: out};
    var x_ANT: mole_per_second_per_l_mito {pub: in};
    var ADP_fi: molar {pub: in};
    var ATP_fi: molar {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var dPsi: millivolt {pub: in};
    var ADP_fx: molar {pub: in};
    var ATP_fx: molar {pub: in};
    var k_mADP: molar {pub: in};
    var mincond: molar {init: 1e-12};
    Psi_x = -0.65{dimensionless}*dPsi;
    Psi_i = 0.35{dimensionless}*dPsi;
    J_ANT = sel
      case (ADP_fi > mincond) or (ATP_fi > mincond):
        x_ANT*(ADP_fi/(ADP_fi+ATP_fi*exp(-F*Psi_i/RT))-ADP_fx/(ADP_fx+ATP_fx*exp(-F*Psi_x/RT)))*ADP_fi/(k_mADP+ADP_fi);
      otherwise:
        0{mole_per_second_per_l_mito};
    endsel;
  enddef;

  def comp MgATPx_binding_flux as
    var J_MgATPx: mole_per_second_per_l_mito {pub: out};
    var ATP_fx: molar {pub: out};
    var x_MgA: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var ATP_x: molar {pub: in};
    var ATP_mx: molar {pub: in};
    var Mg_x: molar {pub: in};
    var K_DT: molar {pub: in};
    ATP_fx = ATP_x-ATP_mx;
    J_MgATPx = x_MgA*(ATP_fx*Mg_x-K_DT*ATP_mx);
  enddef;

  def comp MgADPx_binding_flux as
    var J_MgADPx: mole_per_second_per_l_mito {pub: out};
    var ADP_fx: molar {pub: out};
    var ADP_x: molar {pub: in};
    var ADP_mx: molar {pub: in};
    var x_MgA: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var K_DD: molar {pub: in};
    var Mg_x: molar {pub: in};
    ADP_fx = ADP_x-ADP_mx;
    J_MgADPx = x_MgA*(ADP_fx*Mg_x-K_DD*ADP_mx);
  enddef;

  def comp MgATPi_binding_flux as
    var J_MgATPi: mole_per_second_per_l_mito {pub: out};
    var ATP_fi: molar {pub: out};
    var ATP_i: molar {pub: in};
    var ATP_mi: molar {pub: in};
    var x_MgA: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var K_DT: molar {pub: in};
    var Mg_i: molar {pub: in};
    ATP_fi = ATP_i-ATP_mi;
    J_MgATPi = x_MgA*(ATP_fi*Mg_i-K_DT*ATP_mi);
  enddef;

  def comp MgADPi_binding_flux as
    var J_MgADPi: mole_per_second_per_l_mito {pub: out};
    var ADP_fi: molar {pub: out};
    var ADP_i: molar {pub: in};
    var ADP_mi: molar {pub: in};
    var x_MgA: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var K_DD: molar {pub: in};
    var Mg_i: molar {pub: in};
    ADP_fi = ADP_i-ADP_mi;
    J_MgADPi = x_MgA*(ADP_fi*Mg_i-K_DD*ADP_mi);
  enddef;

  def comp ATP_substrate_flux as
    var J_ATP: mole_per_second_per_l_mito {pub: out};
    var ATP_e: molar {pub: in};
    var gamma: per_micron {pub: in};
    var p_A: micron_per_second {pub: in};
    var ATP_i: molar {pub: in};
    J_ATP = gamma*p_A*(ATP_e-ATP_i);
  enddef;

  def comp ADP_substrate_flux as
    var J_ADP: mole_per_second_per_l_mito {pub: out};
    var gamma: per_micron {pub: in};
    var p_A: micron_per_second {pub: in};
    var ADP_e: molar {pub: in};
    var ADP_i: molar {pub: in};
    J_ADP = gamma*p_A*(ADP_e-ADP_i);
  enddef;

  def comp AMP_substrate_flux as
    var J_AMP: mole_per_second_per_l_mito {pub: out};
    var AMP_e: molar {pub: in};
    var gamma: per_micron {pub: in};
    var p_A: micron_per_second {pub: in};
    var AMP_i: molar {pub: in};
    J_AMP = gamma*p_A*(AMP_e-AMP_i);
  enddef;

  def comp Pi_substrate_flux as
    var J_Pi2: mole_per_second_per_l_mito {pub: out};
    var x_Pi2: micron_per_second {pub: in};
    var gamma: per_micron {pub: in};
    var Pi_e: molar {pub: in};
    var Pi_i: molar {pub: in};
    J_Pi2 = gamma*x_Pi2*(Pi_e-Pi_i);
  enddef;

  def comp Phosphate_hydrogen_cotransporter_flux as
    var J_Pi1: mole_per_second_per_l_mito {pub: out};
    var H2PIi: molar {pub: out};
    var H2PIx: molar {pub: out};
    var Pi_i: molar {pub: in};
    var H_i: molar {pub: in};
    var k_dHPi: molar {pub: in};
    var Pi_x: molar {pub: in};
    var H_x: molar {pub: in};
    var x_Pi1: mole_per_second_per_l_mito_per_molar {pub: in};
    var k_PiH: molar {pub: in};
    H2PIi = Pi_i*H_i/(H_i+k_dHPi);
    H2PIx = Pi_x*H_x/(H_x+k_dHPi);
    J_Pi1 = x_Pi1*(H_x*H2PIi-H_i*H2PIx)/(H2PIi+k_PiH);
  enddef;

  def comp Adenylate_kinase_flux as
    var J_AKi: mole_per_second_per_l_mito {pub: out};
    var x_AK: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var K_AK: dimensionless {pub: in};
    var ADP_i: molar {pub: in};
    var AMP_i: molar {pub: in};
    var ATP_i: molar {pub: in};
    J_AKi = x_AK*(K_AK*ADP_i*ADP_i-AMP_i*ATP_i);
  enddef;

  def comp Hydrogen_leak_flux as
    var J_Hle: mole_per_second_per_l_mito {pub: out};
    var x_Hle: mole_per_second_per_l_mito_per_molar_per_millivolt {pub: in};
    var dPsi: millivolt {pub: in};
    var H_i: molar {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var H_x: molar {pub: in};
    J_Hle = x_Hle*dPsi*(H_i*exp(F*dPsi/RT)-H_x)/(exp(F*dPsi/RT)-1{dimensionless});
  enddef;

  def comp Passive_potassium_flux as
    var J_K: mole_per_second_per_l_mito {pub: out};
    var x_K: mole_per_second_per_l_mito_per_molar_per_millivolt {pub: in};
    var dPsi: millivolt {pub: in};
    var K_i: molar {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var K_x: molar {pub: in};
    J_K = x_K*dPsi*(K_i*exp(F*dPsi/RT)-K_x)/(exp(F*dPsi/RT)-1{dimensionless});
  enddef;

  def comp Potassium_hydrogen_flux as
    var J_KH: mole_per_second_per_l_mito {pub: out};
    var x_KH: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var K_i: molar {pub: in};
    var K_x: molar {pub: in};
    var H_i: molar {pub: in};
    var H_x: molar {pub: in};
    J_KH = x_KH*(K_i*H_x-K_x*H_i);
  enddef;

  def comp NAD_x_concentration as
    var NAD_x: molar {pub: out};
    var NADH_x: molar {pub: in};
    var NADtot: molar {pub: in};
    NAD_x = NADtot-NADH_x;
  enddef;

  def comp Q_concentration as
    var Q: molar {pub: out};
    var Qtot: molar {pub: in};
    var QH2: molar {pub: in};
    Q = Qtot-QH2;
  enddef;

  def comp Cox_concentration as
    var Cox: molar {pub: out};
    var Ctot: molar {pub: in};
    var Cred: molar {pub: in};
    Cox = Ctot-Cred;
  enddef;

  def comp ADP_binding as
    var ADP_me: molar {pub: out};
    var ADP_fe: molar {pub: out};
    var ADP_e: molar {pub: in};
    var K_DD: molar {pub: in};
    var Mg_tot: molar {pub: in};
    ADP_fe = ADP_e-ADP_me;
    ADP_me = (K_DD+ADP_e+Mg_tot-sqrt(sqr(K_DD+ADP_e+Mg_tot)-4{dimensionless}*Mg_tot*ADP_e))/2{dimensionless};
  enddef;

  def comp Mg_binding as
    var Mg_e: molar {pub: out};
    var Mg_tot: molar {pub: in};
    var Mg_i: molar {pub: out};
    var ADP_me: molar {pub: in};
    Mg_e = Mg_tot-ADP_me;
    Mg_i = Mg_e;
  enddef;

  def comp dH_x_dt as
    var H_x: molar {init: 6.30957344480193e-8, pub: out};
    var x_buff: per_molar {pub: in};
    var J_DH: mole_per_second_per_l_mito {pub: in};
    var J_C1: mole_per_second_per_l_mito {pub: in};
    var J_C3: mole_per_second_per_l_mito {pub: in};
    var J_C4: mole_per_second_per_l_mito {pub: in};
    var n_A: dimensionless {pub: in};
    var J_F1: mole_per_second_per_l_mito {pub: in};
    var J_Pi1: mole_per_second_per_l_mito {pub: in};
    var J_Hle: mole_per_second_per_l_mito {pub: in};
    var J_KH: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(H_x, t) = x_buff*H_x*(J_DH-5{dimensionless}*J_C1-2{dimensionless}*J_C3-4{dimensionless}*J_C4+(n_A-1{dimensionless})*J_F1+2{dimensionless}*J_Pi1+J_Hle-J_KH)/W_x;
  enddef;

  def comp dK_x_dt as
    var K_x: molar {init: 0.14, pub: out};
    var J_KH: mole_per_second_per_l_mito {pub: in};
    var J_K: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(K_x, t) = (J_KH+J_K)/W_x;
  enddef;

  def comp dMg_x_dt as
    var Mg_x: molar {init: 0.005, pub: out};
    var J_MgATPx: mole_per_second_per_l_mito {pub: in};
    var J_MgADPx: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(Mg_x, t) = (-J_MgATPx-J_MgADPx)/W_x;
  enddef;

  def comp dNADH_x_dt as
    var NADH_x: molar {init: 0.0015, pub: out};
    var J_DH: mole_per_second_per_l_mito {pub: in};
    var J_C1: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(NADH_x, t) = (J_DH-J_C1)/W_x;
  enddef;

  def comp dQH2_dt as
    var QH2: molar {init: 8e-4, pub: out};
    var J_C1: mole_per_second_per_l_mito {pub: in};
    var J_C3: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(QH2, t) = (J_C1-J_C3)/W_x;
  enddef;

  def comp dCred_dt as
    var Cred: molar {init: 0.001, pub: out};
    var J_C3: mole_per_second_per_l_mito {pub: in};
    var J_C4: mole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(Cred, t) = (2{dimensionless}*J_C3-2{dimensionless}*J_C4)/W_i;
  enddef;

  def comp dATP_x_dt as
    var ATP_x: molar {init: 0, pub: out};
    var J_F1: mole_per_second_per_l_mito {pub: in};
    var J_ANT: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(ATP_x, t) = (J_F1-J_ANT)/W_x;
  enddef;

  def comp dADP_x_dt as
    var ADP_x: molar {init: 0.01, pub: out};
    var J_F1: mole_per_second_per_l_mito {pub: in};
    var J_ANT: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(ADP_x, t) = (-J_F1+J_ANT)/W_x;
  enddef;

  def comp dATP_mx_dt as
    var ATP_mx: molar {init: 0, pub: out};
    var J_MgATPx: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(ATP_mx, t) = J_MgATPx/W_x;
  enddef;

  def comp dADP_mx_dt as
    var ADP_mx: molar {init: 0, pub: out};
    var J_MgADPx: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(ADP_mx, t) = J_MgADPx/W_x;
  enddef;

  def comp dPi_x_dt as
    var Pi_x: molar {init: 0.001, pub: out};
    var J_F1: mole_per_second_per_l_mito {pub: in};
    var J_Pi1: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(Pi_x, t) = (-J_F1+J_Pi1)/W_x;
  enddef;

  def comp dATP_i_dt as
    var ATP_i: molar {init: 0, pub: out};
    var J_ATP: mole_per_second_per_l_mito {pub: in};
    var J_ANT: mole_per_second_per_l_mito {pub: in};
    var J_AKi: mole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(ATP_i, t) = (J_ATP+J_ANT+J_AKi)/W_i;
  enddef;

  def comp dADP_i_dt as
    var ADP_i: molar {init: 0, pub: out};
    var J_ADP: mole_per_second_per_l_mito {pub: in};
    var J_ANT: mole_per_second_per_l_mito {pub: in};
    var J_AKi: mole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(ADP_i, t) = (J_ADP-J_ANT-2{dimensionless}*J_AKi)/W_i;
  enddef;

  def comp dAMP_i_dt as
    var AMP_i: molar {init: 0, pub: out};
    var J_AMP: mole_per_second_per_l_mito {pub: in};
    var J_AKi: mole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(AMP_i, t) = (J_AMP+J_AKi)/W_i;
  enddef;

  def comp dATP_mi_dt as
    var ATP_mi: molar {init: 0, pub: out};
    var J_MgATPi: mole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(ATP_mi, t) = J_MgATPi/W_i;
  enddef;

  def comp dADP_mi_dt as
    var ADP_mi: molar {init: 0, pub: out};
    var J_MgADPi: mole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(ADP_mi, t) = J_MgADPi/W_i;
  enddef;

  def comp dPi_i_dt as
    var Pi_i: molar {init: 0.001, pub: out};
    var J_Pi1: mole_per_second_per_l_mito {pub: in};
    var J_Pi2: mole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var t: second {pub: in};
    ode(Pi_i, t) = (-J_Pi1+J_Pi2)/W_i;
  enddef;

  def comp dPsi_dt as
    var dPsi: millivolt {init: 160, pub: out};
    var J_C1: mole_per_second_per_l_mito {pub: in};
    var J_C3: mole_per_second_per_l_mito {pub: in};
    var J_C4: mole_per_second_per_l_mito {pub: in};
    var n_A: dimensionless {pub: in};
    var J_F1: mole_per_second_per_l_mito {pub: in};
    var J_ANT: mole_per_second_per_l_mito {pub: in};
    var J_Hle: mole_per_second_per_l_mito {pub: in};
    var J_K: mole_per_second_per_l_mito {pub: in};
    var t: second {pub: in};
    var C_im: mole_per_l_mito_per_millivolt {init: 6.756756756756757e-6};
    ode(dPsi, t) = (4{dimensionless}*J_C1+2{dimensionless}*J_C3+4{dimensionless}*J_C4-n_A*J_F1-J_ANT-J_Hle-J_K)/C_im;
  enddef;

  def comp dO2_dt as
    var O2: molar {init: 2.6e-5, pub: out};
    var t: second {pub: in};
    ode(O2, t) = 0{molar_per_second};
  enddef;
  def map between dATP_x_dt and MgATPx_binding_flux for
    vars ATP_x and ATP_x;
  enddef;
  def map between dATP_mx_dt and MgATPx_binding_flux for
    vars ATP_mx and ATP_mx;
    vars J_MgATPx and J_MgATPx;
  enddef;
  def map between dADP_x_dt and MgADPx_binding_flux for
    vars ADP_x and ADP_x;
  enddef;
  def map between dADP_mx_dt and MgADPx_binding_flux for
    vars ADP_mx and ADP_mx;
    vars J_MgADPx and J_MgADPx;
  enddef;
  def map between dATP_i_dt and MgATPi_binding_flux for
    vars ATP_i and ATP_i;
  enddef;
  def map between dATP_mi_dt and MgATPi_binding_flux for
    vars ATP_mi and ATP_mi;
    vars J_MgATPi and J_MgATPi;
  enddef;
  def map between dADP_i_dt and MgADPi_binding_flux for
    vars ADP_i and ADP_i;
  enddef;
  def map between dADP_mi_dt and MgADPi_binding_flux for
    vars ADP_mi and ADP_mi;
    vars J_MgADPi and J_MgADPi;
  enddef;
  def map between Fixed_parameters and ADP_binding for
    vars K_DD and K_DD;
  enddef;
  def map between Environment and ADP_binding for
    vars Mg_tot and Mg_tot;
    vars ADP_e and ADP_e;
  enddef;
  def map between Environment and Mg_binding for
    vars Mg_tot and Mg_tot;
  enddef;
  def map between ADP_binding and Mg_binding for
    vars ADP_me and ADP_me;
  enddef;
  def map between Fixed_parameters and Proton_motive_force for
    vars F and F;
    vars RT and RT;
    vars H_i and H_i;
  enddef;
  def map between dPsi_dt and Proton_motive_force for
    vars dPsi and dPsi;
  enddef;
  def map between dH_x_dt and Proton_motive_force for
    vars H_x and H_x;
  enddef;
  def map between Fixed_parameters and Electron_flux_complex_I for
    vars dG_C1o and dG_C1o;
    vars RT and RT;
  enddef;
  def map between Adjustable_parameters and Electron_flux_complex_I for
    vars x_C1 and x_C1;
  enddef;
  def map between Q_concentration and Electron_flux_complex_I for
    vars Q and Q;
  enddef;
  def map between dQH2_dt and Electron_flux_complex_I for
    vars QH2 and QH2;
    vars J_C1 and J_C1;
  enddef;
  def map between dH_x_dt and Electron_flux_complex_I for
    vars H_x and H_x;
    vars J_C1 and J_C1;
  enddef;
  def map between dNADH_x_dt and Electron_flux_complex_I for
    vars NADH_x and NADH_x;
    vars J_C1 and J_C1;
  enddef;
  def map between NAD_x_concentration and Electron_flux_complex_I for
    vars NAD_x and NAD_x;
  enddef;
  def map between Proton_motive_force and Electron_flux_complex_I for
    vars dG_H and dG_H;
  enddef;
  def map between dH_x_dt and Electron_flux_complex_III for
    vars H_x and H_x;
    vars J_C3 and J_C3;
  enddef;
  def map between Q_concentration and Electron_flux_complex_III for
    vars Q and Q;
  enddef;
  def map between dQH2_dt and Electron_flux_complex_III for
    vars QH2 and QH2;
    vars J_C3 and J_C3;
  enddef;
  def map between dPi_x_dt and Electron_flux_complex_III for
    vars Pi_x and Pi_x;
  enddef;
  def map between Cox_concentration and Electron_flux_complex_III for
    vars Cox and Cox;
  enddef;
  def map between dCred_dt and Electron_flux_complex_III for
    vars Cred and Cred;
    vars J_C3 and J_C3;
  enddef;
  def map between Adjustable_parameters and Electron_flux_complex_III for
    vars k_Pi3 and k_Pi3;
    vars k_Pi4 and k_Pi4;
    vars x_C3 and x_C3;
  enddef;
  def map between Fixed_parameters and Electron_flux_complex_III for
    vars dG_C3o and dG_C3o;
    vars F and F;
    vars RT and RT;
  enddef;
  def map between Fixed_parameters and Electron_flux_complex_IV for
    vars dG_C4o and dG_C4o;
    vars F and F;
    vars RT and RT;
    vars Ctot and Ctot;
  enddef;
  def map between Adjustable_parameters and Electron_flux_complex_IV for
    vars k_O2 and k_O2;
    vars x_C4 and x_C4;
  enddef;
  def map between dH_x_dt and Electron_flux_complex_IV for
    vars H_x and H_x;
    vars J_C4 and J_C4;
  enddef;
  def map between dO2_dt and Electron_flux_complex_IV for
    vars O2 and O2;
  enddef;
  def map between dCred_dt and Electron_flux_complex_IV for
    vars Cred and Cred;
    vars J_C4 and J_C4;
  enddef;
  def map between Cox_concentration and Electron_flux_complex_IV for
    vars Cox and Cox;
  enddef;
  def map between dPsi_dt and Electron_flux_complex_IV for
    vars dPsi and dPsi;
    vars J_C4 and J_C4;
  enddef;
  def map between Adjustable_parameters and ATP_synthesis_flux for
    vars x_F1 and x_F1;
  enddef;
  def map between Fixed_parameters and ATP_synthesis_flux for
    vars K_DD and K_DD;
    vars K_DT and K_DT;
    vars RT and RT;
    vars n_A and n_A;
    vars dG_F1o and dG_F1o;
  enddef;
  def map between Proton_motive_force and ATP_synthesis_flux for
    vars dG_H and dG_H;
  enddef;
  def map between dADP_mx_dt and ATP_synthesis_flux for
    vars ADP_mx and ADP_mx;
  enddef;
  def map between dATP_mx_dt and ATP_synthesis_flux for
    vars ATP_mx and ATP_mx;
  enddef;
  def map between dPi_x_dt and ATP_synthesis_flux for
    vars Pi_x and Pi_x;
    vars J_F1 and J_F1;
  enddef;
  def map between Adjustable_parameters and Dehydrogenase_flux for
    vars x_DH and x_DH;
    vars k_Pi1 and k_Pi1;
    vars k_Pi2 and k_Pi2;
    vars r and r;
  enddef;
  def map between Dehydrogenase_flux and NAD_x_concentration for
    vars NAD_x and NAD_x;
  enddef;
  def map between dNADH_x_dt and Dehydrogenase_flux for
    vars NADH_x and NADH_x;
    vars J_DH and J_DH;
  enddef;
  def map between dPi_x_dt and Dehydrogenase_flux for
    vars Pi_x and Pi_x;
  enddef;
  def map between Adjustable_parameters and ANT_flux for
    vars x_ANT and x_ANT;
    vars k_mADP and k_mADP;
  enddef;
  def map between Fixed_parameters and ANT_flux for
    vars F and F;
    vars RT and RT;
  enddef;
  def map between MgATPx_binding_flux and ANT_flux for
    vars ATP_fx and ATP_fx;
  enddef;
  def map between MgADPx_binding_flux and ANT_flux for
    vars ADP_fx and ADP_fx;
  enddef;
  def map between MgATPi_binding_flux and ANT_flux for
    vars ATP_fi and ATP_fi;
  enddef;
  def map between MgADPi_binding_flux and ANT_flux for
    vars ADP_fi and ADP_fi;
  enddef;
  def map between dPsi_dt and ANT_flux for
    vars dPsi and dPsi;
    vars J_ANT and J_ANT;
  enddef;
  def map between dH_x_dt and Phosphate_hydrogen_cotransporter_flux for
    vars H_x and H_x;
    vars J_Pi1 and J_Pi1;
  enddef;
  def map between dPi_i_dt and Phosphate_hydrogen_cotransporter_flux for
    vars Pi_i and Pi_i;
    vars J_Pi1 and J_Pi1;
  enddef;
  def map between dPi_x_dt and Phosphate_hydrogen_cotransporter_flux for
    vars Pi_x and Pi_x;
    vars J_Pi1 and J_Pi1;
  enddef;
  def map between Fixed_parameters and Phosphate_hydrogen_cotransporter_flux for
    vars H_i and H_i;
    vars k_dHPi and k_dHPi;
  enddef;
  def map between Adjustable_parameters and Phosphate_hydrogen_cotransporter_flux for
    vars x_Pi1 and x_Pi1;
    vars k_PiH and k_PiH;
  enddef;
  def map between Adjustable_parameters and Hydrogen_leak_flux for
    vars x_Hle and x_Hle;
  enddef;
  def map between Fixed_parameters and Hydrogen_leak_flux for
    vars F and F;
    vars H_i and H_i;
    vars RT and RT;
  enddef;
  def map between dPsi_dt and Hydrogen_leak_flux for
    vars dPsi and dPsi;
    vars J_Hle and J_Hle;
  enddef;
  def map between dH_x_dt and Hydrogen_leak_flux for
    vars H_x and H_x;
    vars J_Hle and J_Hle;
  enddef;
  def map between Fixed_parameters and Potassium_hydrogen_flux for
    vars K_i and K_i;
    vars H_i and H_i;
  enddef;
  def map between Adjustable_parameters and Potassium_hydrogen_flux for
    vars x_KH and x_KH;
  enddef;
  def map between dK_x_dt and Potassium_hydrogen_flux for
    vars K_x and K_x;
    vars J_KH and J_KH;
  enddef;
  def map between dH_x_dt and Potassium_hydrogen_flux for
    vars H_x and H_x;
    vars J_KH and J_KH;
  enddef;
  def map between Fixed_parameters and Passive_potassium_flux for
    vars K_i and K_i;
    vars F and F;
    vars RT and RT;
  enddef;
  def map between Adjustable_parameters and Passive_potassium_flux for
    vars x_K and x_K;
  enddef;
  def map between dPsi_dt and Passive_potassium_flux for
    vars dPsi and dPsi;
    vars J_K and J_K;
  enddef;
  def map between dK_x_dt and Passive_potassium_flux for
    vars K_x and K_x;
    vars J_K and J_K;
  enddef;
  def map between Fixed_parameters and Adenylate_kinase_flux for
    vars K_AK and K_AK;
  enddef;
  def map between Adenylate_kinase_flux and Adjustable_parameters for
    vars x_AK and x_AK;
  enddef;
  def map between dADP_i_dt and Adenylate_kinase_flux for
    vars ADP_i and ADP_i;
    vars J_AKi and J_AKi;
  enddef;
  def map between dAMP_i_dt and Adenylate_kinase_flux for
    vars AMP_i and AMP_i;
    vars J_AKi and J_AKi;
  enddef;
  def map between dATP_i_dt and Adenylate_kinase_flux for
    vars ATP_i and ATP_i;
    vars J_AKi and J_AKi;
  enddef;
  def map between Fixed_parameters and AMP_substrate_flux for
    vars AMP_e and AMP_e;
    vars gamma and gamma;
  enddef;
  def map between Adjustable_parameters and AMP_substrate_flux for
    vars p_A and p_A;
  enddef;
  def map between dAMP_i_dt and AMP_substrate_flux for
    vars AMP_i and AMP_i;
    vars J_AMP and J_AMP;
  enddef;
  def map between Fixed_parameters and ADP_substrate_flux for
    vars gamma and gamma;
  enddef;
  def map between Environment and ADP_substrate_flux for
    vars ADP_e and ADP_e;
  enddef;
  def map between Adjustable_parameters and ADP_substrate_flux for
    vars p_A and p_A;
  enddef;
  def map between dADP_i_dt and ADP_substrate_flux for
    vars ADP_i and ADP_i;
    vars J_ADP and J_ADP;
  enddef;
  def map between Fixed_parameters and ATP_substrate_flux for
    vars ATP_e and ATP_e;
    vars gamma and gamma;
  enddef;
  def map between dATP_i_dt and ATP_substrate_flux for
    vars ATP_i and ATP_i;
    vars J_ATP and J_ATP;
  enddef;
  def map between Environment and Pi_substrate_flux for
    vars Pi_e and Pi_e;
  enddef;
  def map between Fixed_parameters and Pi_substrate_flux for
    vars gamma and gamma;
  enddef;
  def map between Adjustable_parameters and Pi_substrate_flux for
    vars x_Pi2 and x_Pi2;
  enddef;
  def map between dPi_i_dt and Pi_substrate_flux for
    vars Pi_i and Pi_i;
    vars J_Pi2 and J_Pi2;
  enddef;
  def map between Fixed_parameters and MgATPx_binding_flux for
    vars K_DT and K_DT;
  enddef;
  def map between Adjustable_parameters and MgATPx_binding_flux for
    vars x_MgA and x_MgA;
  enddef;
  def map between dMg_x_dt and MgATPx_binding_flux for
    vars Mg_x and Mg_x;
    vars J_MgATPx and J_MgATPx;
  enddef;
  def map between Fixed_parameters and MgADPx_binding_flux for
    vars K_DD and K_DD;
  enddef;
  def map between Adjustable_parameters and MgADPx_binding_flux for
    vars x_MgA and x_MgA;
  enddef;
  def map between dMg_x_dt and MgADPx_binding_flux for
    vars Mg_x and Mg_x;
    vars J_MgADPx and J_MgADPx;
  enddef;
  def map between Fixed_parameters and MgATPi_binding_flux for
    vars K_DT and K_DT;
  enddef;
  def map between Adjustable_parameters and MgATPi_binding_flux for
    vars x_MgA and x_MgA;
  enddef;
  def map between Mg_binding and MgATPi_binding_flux for
    vars Mg_i and Mg_i;
  enddef;
  def map between Fixed_parameters and MgADPi_binding_flux for
    vars K_DD and K_DD;
  enddef;
  def map between Adjustable_parameters and MgADPi_binding_flux for
    vars x_MgA and x_MgA;
  enddef;
  def map between Mg_binding and MgADPi_binding_flux for
    vars Mg_i and Mg_i;
  enddef;
  def map between Environment and dH_x_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dH_x_dt for
    vars n_A and n_A;
    vars W_x and W_x;
  enddef;
  def map between Adjustable_parameters and dH_x_dt for
    vars x_buff and x_buff;
  enddef;
  def map between Dehydrogenase_flux and dH_x_dt for
    vars J_DH and J_DH;
  enddef;
  def map between ATP_synthesis_flux and dH_x_dt for
    vars J_F1 and J_F1;
  enddef;
  def map between dK_x_dt and Environment for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dK_x_dt for
    vars W_x and W_x;
  enddef;
  def map between Environment and dMg_x_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dMg_x_dt for
    vars W_x and W_x;
  enddef;
  def map between Environment and dNADH_x_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dNADH_x_dt for
    vars W_x and W_x;
  enddef;
  def map between Environment and dQH2_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dQH2_dt for
    vars W_x and W_x;
  enddef;
  def map between Environment and dCred_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dCred_dt for
    vars W_i and W_i;
  enddef;
  def map between Environment and dO2_dt for
    vars t and t;
  enddef;
  def map between Environment and dATP_x_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dATP_x_dt for
    vars W_x and W_x;
  enddef;
  def map between ATP_synthesis_flux and dATP_x_dt for
    vars J_F1 and J_F1;
  enddef;
  def map between dATP_x_dt and ANT_flux for
    vars J_ANT and J_ANT;
  enddef;
  def map between Environment and dADP_x_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dADP_x_dt for
    vars W_x and W_x;
  enddef;
  def map between ATP_synthesis_flux and dADP_x_dt for
    vars J_F1 and J_F1;
  enddef;
  def map between dADP_x_dt and ANT_flux for
    vars J_ANT and J_ANT;
  enddef;
  def map between dATP_mx_dt and Environment for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dATP_mx_dt for
    vars W_x and W_x;
  enddef;
  def map between dADP_mx_dt and Environment for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dADP_mx_dt for
    vars W_x and W_x;
  enddef;
  def map between dPi_x_dt and Environment for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dPi_x_dt for
    vars W_x and W_x;
  enddef;
  def map between dATP_i_dt and Environment for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dATP_i_dt for
    vars W_i and W_i;
  enddef;
  def map between ANT_flux and dATP_i_dt for
    vars J_ANT and J_ANT;
  enddef;
  def map between Environment and dADP_i_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dADP_i_dt for
    vars W_i and W_i;
  enddef;
  def map between ANT_flux and dADP_i_dt for
    vars J_ANT and J_ANT;
  enddef;
  def map between Environment and dAMP_i_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dAMP_i_dt for
    vars W_i and W_i;
  enddef;
  def map between Environment and dATP_mi_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dATP_mi_dt for
    vars W_i and W_i;
  enddef;
  def map between Environment and dADP_mi_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dADP_mi_dt for
    vars W_i and W_i;
  enddef;
  def map between Environment and dPi_i_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dPi_i_dt for
    vars W_i and W_i;
  enddef;
  def map between Environment and dPsi_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dPsi_dt for
    vars n_A and n_A;
  enddef;
  def map between Electron_flux_complex_I and dPsi_dt for
    vars J_C1 and J_C1;
  enddef;
  def map between Electron_flux_complex_III and dPsi_dt for
    vars J_C3 and J_C3;
    vars dPsi and dPsi;
  enddef;
  def map between dPsi_dt and ATP_synthesis_flux for
    vars J_F1 and J_F1;
  enddef;
  def map between Fixed_parameters and NAD_x_concentration for
    vars NADtot and NADtot;
  enddef;
  def map between dNADH_x_dt and NAD_x_concentration for
    vars NADH_x and NADH_x;
  enddef;
  def map between Fixed_parameters and Q_concentration for
    vars Qtot and Qtot;
  enddef;
  def map between dQH2_dt and Q_concentration for
    vars QH2 and QH2;
  enddef;
  def map between Fixed_parameters and Cox_concentration for
    vars Ctot and Ctot;
  enddef;
  def map between dCred_dt and Cox_concentration for
    vars Cred and Cred;
  enddef;
  def map between Electron_flux_complex_III and Proton_motive_force for
    vars dG_H and dG_H;
  enddef;
  def map between Proton_motive_force and Electron_flux_complex_IV for
    vars dG_H and dG_H;
  enddef;
  def map between ATP_substrate_flux and Adjustable_parameters for
    vars p_A and p_A;
  enddef;
  // Keyword(s)
enddef;
