// creator: Family Lloyd; Given Catherine; Other May; c.lloyd@auckland.ac.nz; Orgname The University of Auckland; Orgunit Auckalnd Bioengineering Institute
// created: W3CDTF 2009-09-29
// simulation: algorithm bdf15; releps 0.000001; abseps 0.000001; pointDensity 2000; endingValue 2500
// title: The Cloutier et al. 2009 Model of Brain Energy Metabolism
// comment: This is the CellML description of Cloutier et al.'s mathematical model of brain energy metabolism; FN Catherine Lloyd
// bio_entity: neuron
// bio_entity: astrocyte
// reference: subject_type keyword; brain; metabolism; metabolic pathway; neurobiology
// reference: Pubmed_id 19396534; Family Cloutier; Given M; Family Bolger; Given F; Other B; Family Lowry; Given J; Other P; Family Wellstead; Given P; title An integrative dynamic model of brain energy metabolism using in vivo neurochemical measurements; W3CDTF 2009-12; title Journal of Computational Neuroscience; volume 27; first_page 391; last_page 414
def model cloutier_model_2009 as
  // An integrative dynamic model of brain energy metabolism using in vivo neurochemical measurements
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellMl model runs in OpenCell to recreate the published results. The units are balanced. Thank you to the original author Mathieu Cloutier for his invaluable help in the final stages of model curation. We recommend the followin simulation conditions: a duration of 2500 seconds with a an increase in neuronal activity at 200 seconds.
  //
  // Model Structure
  //
  // ABSTRACT: An integrative, systems approach to the modelling of brain energy metabolism is presented. Mechanisms such as glutamate cycling between neurons and astrocytes and glycogen storage in astrocytes have been implemented. A unique feature of the model is its calibration using in vivo data of brain glucose and lactate from freely moving rats under various stimuli. The model has been used to perform simulated perturbation experiments that show that glycogen breakdown in astrocytes is significantly activated during sensory (tail pinch) stimulation. This mechanism provides an additional input of energy substrate during high consumption phases. By way of validation, data from the perfusion of 50 microM propranolol in the rat brain was compared with the model outputs. Propranolol affects the glucose dynamics during stimulation, and this was accurately reproduced in the model by a reduction in the glycogen breakdown in astrocytes. The model's predictive capacity was verified by using data from a sensory stimulation (restraint) that was not used for model calibration. Finally, a sensitivity analysis was conducted on the model parameters, this showed that the control of energy metabolism and transport processes are critical in the metabolic behaviour of cerebral tissue.
  //
  // model diagram
  //
  // Schematic diagram of the model for astrocyte-neuron metabolism
  //
  // The original paper reference is cited below:
  //
  // An integrative dynamic model of brain energy metabolism using in vivo neurochemical measurements, Mathieu Cloutier, Fiachra B. Bolger, John P. Lowry and Peter Wellstead, 2009, Journal of Computational Neuroscience, 27, 391-414. PubMed ID: 19396534 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=19396534&query_hl=1&itool=pubmed_docsum)
  def unit s as
    unit second;
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit per_mM_per_s as
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit cm_per_mM_per_s as
    unit metre {pref: centi};
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_cm as
    unit metre {expo: -1, pref: centi};
  enddef;
  def unit C_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit L_per_millimole as
    unit litre;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit mS_per_cm2 as
    unit siemens {pref: milli};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;

  def comp environment as
    var time: s {pub: out};
  enddef;
  // model states

  def comp NAn as
    var NAn: mM {init: 15.533, pub: out};
    var Vn_leak_Na: mM_per_s {pub: in};
    var Vn_pump: mM_per_s {pub: in};
    var Vn_stim: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(NAn, time) = Vn_leak_Na+Vn_stim-3{dimensionless}*Vn_pump;
  enddef;

  def comp GLCn as
    var GLCn: mM {init: 0.2633, pub: out};
    var V_en_GLC: mM_per_s {pub: in};
    var Vn_hk: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(GLCn, time) = V_en_GLC-Vn_hk;
  enddef;

  def comp G6Pn as
    var G6Pn: mM {init: 0.7275, pub: out};
    var Vn_pgi: mM_per_s {pub: in};
    var Vn_hk: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(G6Pn, time) = Vn_hk-Vn_pgi;
  enddef;

  def comp F6Pn as
    var F6Pn: mM {init: 0.1091, pub: out};
    var Vn_pgi: mM_per_s {pub: in};
    var Vn_pfk: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(F6Pn, time) = Vn_pgi-Vn_pfk;
  enddef;

  def comp GAPn as
    var GAPn: mM {init: 0.0418, pub: out};
    var Vn_pgk: mM_per_s {pub: in};
    var Vn_pfk: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(GAPn, time) = 2{dimensionless}*Vn_pfk-Vn_pgk;
  enddef;

  def comp PEPn as
    var PEPn: mM {init: 0.0037, pub: out};
    var Vn_pgk: mM_per_s {pub: in};
    var Vn_pk: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(PEPn, time) = Vn_pgk-Vn_pk;
  enddef;

  def comp PYRn as
    var PYRn: mM {init: 0.0388, pub: out};
    var Vn_pk: mM_per_s {pub: in};
    var Vn_ldh: mM_per_s {pub: in};
    var Vn_mito: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(PYRn, time) = Vn_pk-(Vn_ldh+Vn_mito);
  enddef;

  def comp LACn as
    var LACn: mM {init: 0.3856, pub: out};
    var Vn_ldh: mM_per_s {pub: in};
    var Vne_LAC: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(LACn, time) = Vn_ldh-Vne_LAC;
  enddef;

  def comp NADHn as
    var NADHn: mM {init: 0.0319, pub: out};
    var Vn_pgk: mM_per_s {pub: in};
    var Vn_ldh: mM_per_s {pub: in};
    var Vn_mito: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(NADHn, time) = Vn_pgk-(Vn_ldh+Vn_mito);
  enddef;

  def comp ATPn as
    var ATPn: mM {init: 2.2592, pub: out};
    var nOP: dimensionless {pub: in};
    var Vn_hk: mM_per_s {pub: in};
    var Vn_pfk: mM_per_s {pub: in};
    var Vn_pgk: mM_per_s {pub: in};
    var Vn_pk: mM_per_s {pub: in};
    var Vn_ATPase: mM_per_s {pub: in};
    var Vn_pump: mM_per_s {pub: in};
    var Vn_mito: mM_per_s {pub: in};
    var Vn_ck: mM_per_s {pub: in};
    var dAMP_dATPn: dimensionless {pub: in};
    var time: s {pub: in};
    ode(ATPn, time) = (Vn_pgk+Vn_pk+nOP*Vn_mito+Vn_ck-(Vn_hk+Vn_pfk+Vn_ATPase+Vn_pump))*pow(1{dimensionless}-dAMP_dATPn, -1{dimensionless});
  enddef;

  def comp PCrn as
    var PCrn: mM {init: 4.2529, pub: out};
    var Vn_ck: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(PCrn, time) = -Vn_ck;
  enddef;

  def comp O2n as
    var O2n: mM {init: 0.0975, pub: out};
    var NAero: dimensionless {pub: in};
    var Vn_mito: mM_per_s {pub: in};
    var Vcn_O2: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(O2n, time) = Vcn_O2-NAero*Vn_mito;
  enddef;

  def comp GLUn as
    var GLUn: mM {init: 3.0, pub: out};
    var Rng: dimensionless {pub: in};
    var Vg_gs: mM_per_s {pub: in};
    var Vn_stim_GLU: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(GLUn, time) = Vg_gs*(1{dimensionless}/Rng)-Vn_stim_GLU;
  enddef;

  def comp NAg as
    var NAg: mM {init: 13.36, pub: out};
    var Vg_leak_Na: mM_per_s {pub: in};
    var Vg_pump: mM_per_s {pub: in};
    var Veg_GLU: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(NAg, time) = Vg_leak_Na+3{dimensionless}*Veg_GLU-3{dimensionless}*Vg_pump;
  enddef;

  def comp GLCg as
    var GLCg: mM {init: 0.1656, pub: out};
    var Vcg_GLC: mM_per_s {pub: in};
    var Veg_GLC: mM_per_s {pub: in};
    var Vg_hk: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(GLCg, time) = Vcg_GLC+Veg_GLC-Vg_hk;
  enddef;

  def comp G6Pg as
    var G6Pg: mM {init: 0.7326, pub: out};
    var Vg_pgi: mM_per_s {pub: in};
    var Vg_glys: mM_per_s {pub: in};
    var Vg_glyp: mM_per_s {pub: in};
    var Vg_hk: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(G6Pg, time) = Vg_hk+Vg_glyp-(Vg_pgi+Vg_glys);
  enddef;

  def comp F6Pg as
    var F6Pg: mM {init: 0.1116, pub: out};
    var Vg_pgi: mM_per_s {pub: in};
    var Vg_pfk: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(F6Pg, time) = Vg_pgi-Vg_pfk;
  enddef;

  def comp GAPg as
    var GAPg: mM {init: 0.0698, pub: out};
    var Vg_pgk: mM_per_s {pub: in};
    var Vg_pfk: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(GAPg, time) = 2{dimensionless}*Vg_pfk-Vg_pgk;
  enddef;

  def comp PEPg as
    var PEPg: mM {init: 0.0254, pub: out};
    var Vg_pgk: mM_per_s {pub: in};
    var Vg_pk: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(PEPg, time) = Vg_pgk-Vg_pk;
  enddef;

  def comp PYRg as
    var PYRg: mM {init: 0.1711, pub: out};
    var Vg_ldh: mM_per_s {pub: in};
    var Vg_pk: mM_per_s {pub: in};
    var Vg_mito: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(PYRg, time) = Vg_pk-(Vg_ldh+Vg_mito);
  enddef;

  def comp LACg as
    var LACg: mM {init: 0.4651, pub: out};
    var Vg_ldh: mM_per_s {pub: in};
    var Vge_LAC: mM_per_s {pub: in};
    var Vgc_LAC: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(LACg, time) = Vg_ldh-(Vge_LAC+Vgc_LAC);
  enddef;

  def comp NADHg as
    var NADHg: mM {init: 0.0445, pub: out};
    var Vg_pgk: mM_per_s {pub: in};
    var Vg_ldh: mM_per_s {pub: in};
    var Vg_mito: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(NADHg, time) = Vg_pgk-(Vg_ldh+Vg_mito);
  enddef;

  def comp ATPg as
    var ATPg: mM {init: 2.24, pub: out};
    var nOP: dimensionless {pub: in};
    var Vg_hk: mM_per_s {pub: in};
    var Vg_pfk: mM_per_s {pub: in};
    var Vg_pgk: mM_per_s {pub: in};
    var Vg_pk: mM_per_s {pub: in};
    var Vg_ATPase: mM_per_s {pub: in};
    var Vg_pump: mM_per_s {pub: in};
    var Vg_mito: mM_per_s {pub: in};
    var Vg_ck: mM_per_s {pub: in};
    var Vg_gs: mM_per_s {pub: in};
    var dAMP_dATPg: dimensionless {pub: in};
    var time: s {pub: in};
    ode(ATPg, time) = (Vg_pgk+Vg_pk+nOP*Vg_mito+Vg_ck-(Vg_hk+Vg_pfk+Vg_ATPase+Vg_pump+Vg_gs))*pow(1{dimensionless}-dAMP_dATPg, -1{dimensionless});
  enddef;

  def comp PCrg as
    var PCrg: mM {init: 4.6817, pub: out};
    var Vg_ck: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(PCrg, time) = -Vg_ck;
  enddef;

  def comp O2g as
    var O2g: mM {init: 0.1589, pub: out};
    var NAero: dimensionless {pub: in};
    var Vg_mito: mM_per_s {pub: in};
    var Vcg_O2: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(O2g, time) = Vcg_O2-NAero*Vg_mito;
  enddef;

  def comp GLYg as
    var GLYg: mM {init: 2.5, pub: out};
    var Vg_glys: mM_per_s {pub: in};
    var Vg_glyp: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(GLYg, time) = Vg_glys-Vg_glyp;
  enddef;

  def comp GLUg as
    var GLUg: mM {init: 0.0, pub: out};
    var Veg_GLU: mM_per_s {pub: in};
    var Vg_gs: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(GLUg, time) = Veg_GLU-Vg_gs;
  enddef;

  def comp GLCe as
    var GLCe: mM {init: 0.3339, pub: out};
    var Reg: dimensionless {pub: in};
    var Ren: dimensionless {pub: in};
    var Vce_GLC: mM_per_s {pub: in};
    var Veg_GLC: mM_per_s {pub: in};
    var V_en_GLC: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(GLCe, time) = Vce_GLC-(Veg_GLC*(1{dimensionless}/Reg)+V_en_GLC*(1{dimensionless}/Ren));
  enddef;

  def comp LACe as
    var LACe: mM {init: 0.3986, pub: out};
    var Reg: dimensionless {pub: in};
    var Ren: dimensionless {pub: in};
    var Vec_LAC: mM_per_s {pub: in};
    var Vne_LAC: mM_per_s {pub: in};
    var Vge_LAC: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(LACe, time) = Vne_LAC*(1{dimensionless}/Ren)+Vge_LAC*(1{dimensionless}/Reg)-Vec_LAC;
  enddef;

  def comp GLUe as
    var GLUe: mM {init: 0.0, pub: out};
    var Reg: dimensionless {pub: in};
    var Ren: dimensionless {pub: in};
    var Vn_stim_GLU: mM_per_s {pub: in};
    var Veg_GLU: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(GLUe, time) = Vn_stim_GLU*(1{dimensionless}/Ren)-Veg_GLU*(1{dimensionless}/Reg);
  enddef;

  def comp O2c as
    var O2c: mM {init: 7.4201, pub: out};
    var Rcn: dimensionless {pub: in};
    var Rcg: dimensionless {pub: in};
    var Vc_O2: mM_per_s {pub: in};
    var Vcn_O2: mM_per_s {pub: in};
    var Vcg_O2: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(O2c, time) = Vc_O2-(Vcn_O2*(1{dimensionless}/Rcn)+Vcg_O2*(1{dimensionless}/Rcg));
  enddef;

  def comp GLCc as
    var GLCc: mM {init: 4.6401, pub: out};
    var Rce: dimensionless {pub: in};
    var Rcg: dimensionless {pub: in};
    var Vc_GLC: mM_per_s {pub: in};
    var Vce_GLC: mM_per_s {pub: in};
    var Vcg_GLC: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(GLCc, time) = Vc_GLC-(Vce_GLC*(1{dimensionless}/Rce)+Vcg_GLC*(1{dimensionless}/Rcg));
  enddef;

  def comp LACc as
    var LACc: mM {init: 0.3251, pub: out};
    var Rce: dimensionless {pub: in};
    var Rcg: dimensionless {pub: in};
    var Vc_LAC: mM_per_s {pub: in};
    var Vec_LAC: mM_per_s {pub: in};
    var Vgc_LAC: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(LACc, time) = Vc_LAC+Vec_LAC*(1{dimensionless}/Rce)+Vgc_LAC*(1{dimensionless}/Rcg);
  enddef;

  def comp CO2c as
    var CO2c: mM {init: 2.12, pub: out};
    var Rcn: dimensionless {pub: in};
    var Rcg: dimensionless {pub: in};
    var Vnc_CO2: mM_per_s {pub: in};
    var Vc_CO2: mM_per_s {pub: in};
    var Vgc_CO2: mM_per_s {pub: in};
    var time: s {pub: in};
    ode(CO2c, time) = Vnc_CO2*(1{dimensionless}/Rcn)+Vgc_CO2*(1{dimensionless}/Rcg)-Vc_CO2;
  enddef;

  def comp Vv as
    var Vv: dimensionless {init: 0.0237, pub: out};
    var Fin_t: per_s {pub: in};
    var Fout_t: per_s {pub: in};
    var time: s {pub: in};
    ode(Vv, time) = Fin_t-Fout_t;
  enddef;

  def comp dHb as
    var dHb: mM {init: 0.0218, pub: out};
    var Fin_t: per_s {pub: in};
    var Fout_t: per_s {pub: in};
    var Vv: dimensionless {pub: in};
    var O2a: mM {pub: in};
    var O2c: mM {pub: in};
    var time: s {pub: in};
    ode(dHb, time) = Fin_t*(O2a-O2c)-Fout_t*(dHb/Vv);
  enddef;
  // model reactions

  def comp Vn_leak_Na as
    var Vn_leak_Na: mM_per_s {pub: out};
    var gn_NA: mS_per_cm2 {init: 0.0039};
    var Sm_n: per_cm {pub: in};
    var Vm: mV {pub: in};
    var Vn: dimensionless {pub: in};
    var RT: mV_C_per_mol {pub: in};
    var F: C_per_mole {pub: in};
    var NAe: mM {pub: in};
    var NAn: mM {pub: in};
    Vn_leak_Na = Sm_n/Vn*(gn_NA/F)*(RT/F*ln(NAe/NAn)-Vm);
  enddef;

  def comp Vn_pump as
    var Vn_pump: mM_per_s {pub: out};
    var kpump: cm_per_mM_per_s {pub: in};
    var Km_pump: mM {pub: in};
    var Sm_n: per_cm {pub: in};
    var Vn: dimensionless {pub: in};
    var ATPn: mM {pub: in};
    var NAn: mM {pub: in};
    Vn_pump = Sm_n/Vn*kpump*ATPn*NAn*pow(1{dimensionless}+ATPn/Km_pump, -1{dimensionless});
  enddef;

  def comp Vn_stim as
    var Vn_stim: mM_per_s {pub: out};
    var v_stim: mM_per_s {pub: in};
    Vn_stim = v_stim;
  enddef;

  def comp V_en_GLC as
    var V_en_GLC: mM_per_s {pub: out};
    var Km_en_GLC: mM {init: 5.32};
    var Vm_en_GLC: mM_per_s {init: 0.50417};
    var GLCe: mM {pub: in};
    var GLCn: mM {pub: in};
    V_en_GLC = Vm_en_GLC*(GLCe/(GLCe+Km_en_GLC)-GLCn/(GLCn+Km_en_GLC));
  enddef;

  def comp Vn_hk as
    var Vn_hk: mM_per_s {pub: out};
    var Vmax_n_hk: mM_per_s {init: 0.0513};
    var Km_GLC: mM {pub: in};
    var GLCn: mM {pub: in};
    var ATPn: mM {pub: in};
    var G6Pn: mM {pub: in};
    var G6P_inh_hk: mM {pub: in};
    var aG6P_inh_hk: dimensionless {pub: in};
    Vn_hk = Vmax_n_hk*ATPn*(GLCn/(GLCn+Km_GLC))*(1{per_mM}-1{per_mM}/(1{dimensionless}+exp(-aG6P_inh_hk*(1{per_mM}*(G6Pn-G6P_inh_hk)))));
  enddef;

  def comp Vn_pgi as
    var Vn_pgi: mM_per_s {pub: out};
    var Vmaxf_n_pgi: mM_per_s {init: 0.5};
    var Vmaxr_n_pgi: mM_per_s {init: 0.45};
    var Km_G6P: mM {pub: in};
    var Km_F6P_pgi: mM {pub: in};
    var F6Pn: mM {pub: in};
    var G6Pn: mM {pub: in};
    Vn_pgi = Vmaxf_n_pgi*(G6Pn/(G6Pn+Km_G6P))-Vmaxr_n_pgi*(F6Pn/(F6Pn+Km_F6P_pgi));
  enddef;

  def comp Vn_pfk as
    var Vn_pfk: mM_per_s {pub: out};
    var kn_pfk: per_s {init: 0.55783};
    var Km_F6P_pfk: mM {pub: in};
    var Ki_ATP: mM {pub: in};
    var nH: dimensionless {pub: in};
    var ATPn: mM {pub: in};
    var F6Pn: mM {pub: in};
    Vn_pfk = kn_pfk*ATPn*(F6Pn/(F6Pn+Km_F6P_pfk))*pow(1{dimensionless}+pow(ATPn/Ki_ATP, nH), -1{dimensionless});
  enddef;

  def comp Vn_pgk as
    var Vn_pgk: mM_per_s {pub: out};
    var kn_pgk: per_mM_per_s {init: 0.4287};
    var ADPn: mM {pub: in};
    var GAPn: mM {pub: in};
    var NADn: mM {pub: in};
    var NADHn: mM {pub: in};
    Vn_pgk = kn_pgk*GAPn*ADPn*(NADn/NADHn);
  enddef;

  def comp Vn_pk as
    var Vn_pk: mM_per_s {pub: out};
    var kn_pk: per_mM_per_s {init: 28.6};
    var PEPn: mM {pub: in};
    var ADPn: mM {pub: in};
    Vn_pk = kn_pk*PEPn*ADPn;
  enddef;

  def comp Vn_ldh as
    var Vn_ldh: mM_per_s {pub: out};
    var kfn_ldh: per_mM_per_s {init: 5.30};
    var krn_ldh: per_mM_per_s {init: 0.1046};
    var PYRn: mM {pub: in};
    var NADHn: mM {pub: in};
    var LACn: mM {pub: in};
    var NADn: mM {pub: in};
    Vn_ldh = kfn_ldh*PYRn*NADHn-krn_ldh*LACn*NADn;
  enddef;

  def comp Vn_mito as
    var Vn_mito: mM_per_s {pub: out};
    var Vmax_n_mito: mM_per_s {init: 0.05557};
    var Km_O2: mM {pub: in};
    var Km_ADP: mM {pub: in};
    var Km_PYR: mM {pub: in};
    var O2n: mM {pub: in};
    var ADPn: mM {pub: in};
    var PYRn: mM {pub: in};
    var ATPn: mM {pub: in};
    var rATP_mito: dimensionless {pub: in};
    var aATP_mito: dimensionless {pub: in};
    Vn_mito = Vmax_n_mito*(O2n/(O2n+Km_O2))*(ADPn/(ADPn+Km_ADP))*(PYRn/(PYRn+Km_PYR))*(1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp(-aATP_mito*(1{dimensionless}*(ATPn/ADPn-1{dimensionless}*rATP_mito)))));
  enddef;

  def comp Vne_LAC as
    var Vne_LAC: mM_per_s {pub: out};
    var Vmax_ne_LAC: mM_per_s {init: 0.1978};
    var Km_ne_LAC: mM {init: 0.09314};
    var LACn: mM {pub: in};
    var LACe: mM {pub: in};
    Vne_LAC = Vmax_ne_LAC*(LACn/(LACn+Km_ne_LAC)-LACe/(LACe+Km_ne_LAC));
  enddef;

  def comp Vn_ATPase as
    var Vn_ATPase: mM_per_s {pub: out};
    var Vmax_n_ATPase: mM_per_s {init: 0.04889};
    var ATPn: mM {pub: in};
    Vn_ATPase = Vmax_n_ATPase*(ATPn/(ATPn+0.001{mM}));
  enddef;

  def comp Vn_ck as
    var Vn_ck: mM_per_s {pub: out};
    var krn_ck: per_mM_per_s {init: 0.015};
    var kfn_ck: per_mM_per_s {init: 0.0524681};
    var PCrn: mM {pub: in};
    var ADPn: mM {pub: in};
    var CRn: mM {pub: in};
    var ATPn: mM {pub: in};
    Vn_ck = kfn_ck*PCrn*ADPn-krn_ck*CRn*ATPn;
  enddef;

  def comp Vcn_O2 as
    var Vcn_O2: mM_per_s {pub: out};
    var nh_O2: dimensionless {init: 2.7};
    var PScapn: per_s {init: 0.2202};
    var Ko2: mM {pub: in};
    var Vn: dimensionless {pub: in};
    var HbOP: mM {pub: in};
    var O2c: mM {pub: in};
    var O2n: mM {pub: in};
    Vcn_O2 = PScapn/Vn*(Ko2*pow(HbOP/O2c-1.0{dimensionless}, -1.0{dimensionless}/nh_O2)-O2n);
  enddef;

  def comp Vg_leak_Na as
    var Vg_leak_Na: mM_per_s {pub: out};
    var gg_NA: mS_per_cm2 {init: 0.00325};
    var Sm_g: per_cm {pub: in};
    var Vm: mV {pub: in};
    var Vg: dimensionless {pub: in};
    var RT: mV_C_per_mol {pub: in};
    var F: C_per_mole {pub: in};
    var NAe: mM {pub: in};
    var NAg: mM {pub: in};
    Vg_leak_Na = Sm_g/Vg*(gg_NA/F)*(RT/F*ln(NAe/NAg)-Vm);
  enddef;

  def comp Vg_pump as
    var Vg_pump: mM_per_s {pub: out};
    var kpump: cm_per_mM_per_s {pub: in};
    var Km_pump: mM {pub: in};
    var Sm_g: per_cm {pub: in};
    var Vg: dimensionless {pub: in};
    var ATPg: mM {pub: in};
    var NAg: mM {pub: in};
    Vg_pump = Sm_g/Vg*kpump*ATPg*NAg*pow(1{dimensionless}+ATPg/Km_pump, -1{dimensionless});
  enddef;

  def comp Veg_GLC as
    var Veg_GLC: mM_per_s {pub: out};
    var Km_eg_GLC: mM {init: 3.53};
    var Vm_eg_GLC: mM_per_s {init: 0.038089};
    var GLCg: mM {pub: in};
    var GLCe: mM {pub: in};
    var KO1: dimensionless {pub: in};
    Veg_GLC = KO1*Vm_eg_GLC*(GLCe/(GLCe+Km_eg_GLC)-GLCg/(GLCg+Km_eg_GLC));
  enddef;

  def comp Vcg_GLC as
    var Vcg_GLC: mM_per_s {pub: out};
    var Km_cg_GLC: mM {init: 9.92};
    var Vm_cg_GLC: mM_per_s {init: 0.0098394};
    var GLCg: mM {pub: in};
    var GLCc: mM {pub: in};
    Vcg_GLC = Vm_cg_GLC*(GLCc/(GLCc+Km_cg_GLC)-GLCg/(GLCg+Km_cg_GLC));
  enddef;

  def comp Vg_hk as
    var Vg_hk: mM_per_s {pub: out};
    var Vmax_g_hk: mM_per_s {init: 0.050461};
    var Km_GLC: mM {pub: in};
    var GLCg: mM {pub: in};
    var ATPg: mM {pub: in};
    var G6Pg: mM {pub: in};
    var G6P_inh_hk: mM {pub: in};
    var aG6P_inh_hk: dimensionless {pub: in};
    Vg_hk = Vmax_g_hk*ATPg*(GLCg/(GLCg+Km_GLC))*(1{per_mM}-1{per_mM}/(1{dimensionless}+exp(-aG6P_inh_hk*(1{per_mM}*(G6Pg-G6P_inh_hk)))));
  enddef;

  def comp Vg_pgi as
    var Vg_pgi: mM_per_s {pub: out};
    var Vmaxf_g_pgi: mM_per_s {init: 0.5};
    var Vmaxr_g_pgi: mM_per_s {init: 0.45};
    var Km_G6P: mM {pub: in};
    var Km_F6P_pgi: mM {pub: in};
    var F6Pg: mM {pub: in};
    var G6Pg: mM {pub: in};
    Vg_pgi = Vmaxf_g_pgi*(G6Pg/(G6Pg+Km_G6P))-Vmaxr_g_pgi*(F6Pg/(F6Pg+Km_F6P_pgi));
  enddef;

  def comp Vg_pfk as
    var Vg_pfk: mM_per_s {pub: out};
    var kg_pfk: per_s {init: 0.403};
    var Km_F6P_pfk: mM {pub: in};
    var Ki_ATP: mM {pub: in};
    var nH: dimensionless {pub: in};
    var ATPg: mM {pub: in};
    var F6Pg: mM {pub: in};
    Vg_pfk = kg_pfk*ATPg*(F6Pg/(F6Pg+Km_F6P_pfk))*pow(1{dimensionless}+pow(ATPg/Ki_ATP, nH), -1{dimensionless});
  enddef;

  def comp Vg_pgk as
    var Vg_pgk: mM_per_s {pub: out};
    var kg_pgk: per_mM_per_s {init: 0.2514};
    var ADPg: mM {pub: in};
    var GAPg: mM {pub: in};
    var NADg: mM {pub: in};
    var NADHg: mM {pub: in};
    Vg_pgk = kg_pgk*GAPg*ADPg*(NADg/NADHg);
  enddef;

  def comp Vg_pk as
    var Vg_pk: mM_per_s {pub: out};
    var kg_pk: per_mM_per_s {init: 2.73};
    var PEPg: mM {pub: in};
    var ADPg: mM {pub: in};
    Vg_pk = kg_pk*PEPg*ADPg;
  enddef;

  def comp Vg_ldh as
    var Vg_ldh: mM_per_s {pub: out};
    var kfg_ldh: per_mM_per_s {init: 6.2613};
    var krg_ldh: per_mM_per_s {init: 0.54682};
    var PYRg: mM {pub: in};
    var NADHg: mM {pub: in};
    var LACg: mM {pub: in};
    var NADg: mM {pub: in};
    Vg_ldh = kfg_ldh*PYRg*NADHg-krg_ldh*LACg*NADg;
  enddef;

  def comp Vg_mito as
    var Vg_mito: mM_per_s {pub: out};
    var Vmax_g_mito: mM_per_s {init: 0.008454};
    var Km_O2: mM {pub: in};
    var Km_ADP: mM {pub: in};
    var Km_PYR: mM {pub: in};
    var O2g: mM {pub: in};
    var ADPg: mM {pub: in};
    var PYRg: mM {pub: in};
    var ATPg: mM {pub: in};
    var rATP_mito: dimensionless {pub: in};
    var aATP_mito: dimensionless {pub: in};
    Vg_mito = Vmax_g_mito*(O2g/(O2g+Km_O2))*(ADPg/(ADPg+Km_ADP))*(PYRg/(PYRg+Km_PYR))*(1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp(1{dimensionless}*(-aATP_mito)*(ATPg/ADPg-1{dimensionless}*rATP_mito))));
  enddef;

  def comp Vge_LAC as
    var Vge_LAC: mM_per_s {pub: out};
    var Vmax_ge_LAC: mM_per_s {init: 0.086124};
    var Km_ge_LAC: mM {init: 0.22163};
    var LACg: mM {pub: in};
    var LACe: mM {pub: in};
    Vge_LAC = Vmax_ge_LAC*(LACg/(LACg+Km_ge_LAC)-LACe/(LACe+Km_ge_LAC));
  enddef;

  def comp Vgc_LAC as
    var Vgc_LAC: mM_per_s {pub: out};
    var Vmax_gc_LAC: mM_per_s {init: 0.00021856};
    var Km_gc_LAC: mM {init: 0.12862};
    var LACg: mM {pub: in};
    var LACc: mM {pub: in};
    Vgc_LAC = Vmax_gc_LAC*(LACg/(LACg+Km_gc_LAC)-LACc/(LACc+Km_gc_LAC));
  enddef;

  def comp Vg_ATPase as
    var Vg_ATPase: mM_per_s {pub: out};
    var Vmax_g_ATPase: mM_per_s {init: 0.035657};
    var ATPg: mM {pub: in};
    Vg_ATPase = Vmax_g_ATPase*(ATPg/(ATPg+0.001{mM}));
  enddef;

  def comp Vg_ck as
    var Vg_ck: mM_per_s {pub: out};
    var krg_ck: per_mM_per_s {init: 0.02073};
    var kfg_ck: per_mM_per_s {init: 0.0243};
    var PCrg: mM {pub: in};
    var ADPg: mM {pub: in};
    var CRg: mM {pub: in};
    var ATPg: mM {pub: in};
    Vg_ck = kfg_ck*PCrg*ADPg-krg_ck*CRg*ATPg;
  enddef;

  def comp Vcg_O2 as
    var Vcg_O2: mM_per_s {pub: out};
    var PScapg: per_s {init: 0.2457};
    var Ko2: mM {pub: in};
    var nh_O2: dimensionless {pub: in};
    var Vg: dimensionless {pub: in};
    var HbOP: mM {pub: in};
    var O2c: mM {pub: in};
    var O2g: mM {pub: in};
    Vcg_O2 = PScapg/Vg*(Ko2*pow(HbOP/O2c-1.0{dimensionless}, -1.0{dimensionless}/nh_O2)-O2g);
  enddef;

  def comp Vc_O2 as
    var Vc_O2: mM_per_s {pub: out};
    var Fin_t: per_s {pub: in};
    var Vc: dimensionless {pub: in};
    var O2a: mM {pub: in};
    var O2c: mM {pub: in};
    Vc_O2 = 2.0{dimensionless}*(Fin_t/Vc)*(O2a-O2c);
  enddef;

  def comp Vc_GLC as
    var Vc_GLC: mM_per_s {pub: out};
    var Fin_t: per_s {pub: in};
    var Vc: dimensionless {pub: in};
    var GLCa: mM {pub: in};
    var GLCc: mM {pub: in};
    Vc_GLC = 2.0{dimensionless}*(Fin_t/Vc)*(GLCa-GLCc);
  enddef;

  def comp Vce_GLC as
    var Vce_GLC: mM_per_s {pub: out};
    var Km_ce_GLC: mM {init: 8.4568};
    var Vm_ce_GLC: mM_per_s {init: 0.0489};
    var GLCe: mM {pub: in};
    var GLCc: mM {pub: in};
    Vce_GLC = Vm_ce_GLC*(GLCc/(GLCc+Km_ce_GLC)-GLCe/(GLCe+Km_ce_GLC));
  enddef;

  def comp Vc_LAC as
    var Vc_LAC: mM_per_s {pub: out};
    var Fin_t: per_s {pub: in};
    var Vc: dimensionless {pub: in};
    var LACa: mM {pub: in};
    var LACc: mM {pub: in};
    Vc_LAC = 2.0{dimensionless}*(Fin_t/Vc)*(LACa-LACc);
  enddef;

  def comp Vec_LAC as
    var Vec_LAC: mM_per_s {pub: out};
    var Km_ec_LAC: mM {init: 0.764818};
    var Vm_ec_LAC: mM_per_s {init: 0.0325};
    var LACe: mM {pub: in};
    var LACc: mM {pub: in};
    Vec_LAC = Vm_ec_LAC*(LACe/(LACe+Km_ec_LAC)-LACc/(LACc+Km_ec_LAC));
  enddef;

  def comp Vnc_CO2 as
    var Vnc_CO2: mM_per_s {pub: out};
    var Vn_mito: mM_per_s {pub: in};
    Vnc_CO2 = 3.0{dimensionless}*Vn_mito;
  enddef;

  def comp Vgc_CO2 as
    var Vgc_CO2: mM_per_s {pub: out};
    var Vg_mito: mM_per_s {pub: in};
    Vgc_CO2 = 3.0{dimensionless}*Vg_mito;
  enddef;

  def comp Vn_stim_GLU as
    var Vn_stim_GLU: mM_per_s {pub: out};
    var R_GLU_NA: dimensionless {pub: in};
    var Km_GLU: mM {pub: in};
    var GLUn: mM {pub: in};
    var KO2: dimensionless {pub: in};
    var Vn_stim: mM_per_s {pub: in};
    Vn_stim_GLU = Vn_stim*R_GLU_NA*KO2*(GLUn/(GLUn+Km_GLU));
  enddef;

  def comp Vg_gs as
    var Vg_gs: mM_per_s {pub: out};
    var Vmax_g_gs: mM_per_s {init: 0.3};
    var Km_GLU: mM {pub: in};
    var Km_ATP: mM {pub: in};
    var GLUg: mM {pub: in};
    var ATPg: mM {pub: in};
    Vg_gs = Vmax_g_gs*(GLUg/(GLUg+Km_GLU)*(ATPg/(ATPg+Km_ATP)));
  enddef;

  def comp Veg_GLU as
    var Veg_GLU: mM_per_s {pub: out};
    var Vmax_eg_GLU: mM_per_s {init: 0.0208};
    var Km_GLU: mM {pub: in};
    var GLUe: mM {pub: in};
    Veg_GLU = Vmax_eg_GLU*(GLUe/(GLUe+Km_GLU));
  enddef;

  def comp Vc_CO2 as
    var Vc_CO2: mM_per_s {pub: out};
    var Fin_t: per_s {pub: in};
    var Vc: dimensionless {pub: in};
    var CO2a: mM {pub: in};
    var CO2c: mM {pub: in};
    Vc_CO2 = 2.0{dimensionless}*(Fin_t/Vc)*(CO2c-CO2a);
  enddef;

  def comp Vg_glys as
    var Vg_glys: mM_per_s {pub: out};
    var Vmax_glys: mM_per_s {init: 0.0001528};
    var Km_G6P_glys: mM {init: 0.5};
    var G6Pg: mM {pub: in};
    var GLYg: mM {pub: in};
    var GLY_inh: mM {pub: in};
    var aGLY_inh: dimensionless {pub: in};
    Vg_glys = Vmax_glys*(G6Pg/(G6Pg+Km_G6P_glys))*(1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp(-aGLY_inh*(1{per_mM}*(GLYg-GLY_inh)))));
  enddef;

  def comp Vg_glyp as
    var Vg_glyp: mM_per_s {pub: out};
    var Vmax_glyp: mM_per_s {init: 4.922e-5};
    var Km_GLY: mM {init: 1.0};
    var deltaVt_GLY: dimensionless;
    var unitstepSB2: dimensionless {pub: in};
    var stim: dimensionless {pub: in};
    var to: s {pub: in};
    var to_GLY: s {pub: in};
    var tend_GLY: s {pub: in};
    var sr_GLY: dimensionless {pub: in};
    var t1: s {pub: in};
    var delta_GLY: dimensionless {pub: in};
    var time: s {pub: in};
    var GLYg: mM {pub: in};
    var KO3: dimensionless {pub: in};
    Vg_glyp = Vmax_glyp*(GLYg/(GLYg+Km_GLY))*deltaVt_GLY;
    deltaVt_GLY = 1{dimensionless}+stim*(delta_GLY*KO3*(1{dimensionless}/(1{dimensionless}+exp(1{per_s}*(-sr_GLY)*(time-(to+to_GLY)))))*(1{dimensionless}-unitstepSB2));
  enddef;
  // model variables

  def comp Fin_t as
    var Fin_t: per_s {pub: out};
    var CBF0: per_s {init: 0.012};
    var stim: dimensionless {pub: in};
    var to: s {pub: in};
    var tend: s {pub: in};
    var sr: dimensionless {pub: in};
    var t1: s {pub: in};
    var deltaf: dimensionless {pub: in};
    var time: s {pub: in};
    Fin_t = CBF0+stim*CBF0*deltaf*(1{dimensionless}/(1{dimensionless}+exp(1{per_s}*(-sr)*(time-(to+t1-3{second})))))-stim*CBF0*deltaf*(1{dimensionless}/(1{dimensionless}+exp(1{per_s}*(-sr)*(time-(to+tend+t1+3{second})))));
  enddef;

  def comp Fout_t as
    var Fout_t: per_s {pub: out};
    var Fin_t: per_s {pub: in};
    var CBF0: per_s {pub: in};
    var Vv: dimensionless {pub: in};
    var Vv0: dimensionless {pub: in};
    var tv: s {pub: in};
    Fout_t = CBF0*((sqr(Vv/Vv0)+tv*pow(Vv/Vv0, -0.5{dimensionless})*(Fin_t/Vv0))/(1{dimensionless}+CBF0*tv*pow(Vv/Vv0, -0.5{dimensionless})*(1{dimensionless}/Vv0)));
  enddef;

  def comp NADn as
    var NADn: mM {pub: out};
    var NADH_n_tot: mM {init: 0.22};
    var NADHn: mM {pub: in};
    NADn = NADH_n_tot-NADHn;
  enddef;

  def comp NADg as
    var NADg: mM {pub: out};
    var NADH_g_tot: mM {init: 0.22};
    var NADHg: mM {pub: in};
    NADg = NADH_g_tot-NADHg;
  enddef;

  def comp CRn as
    var CRn: mM {pub: out};
    var PCrn_tot: mM {init: 5.0};
    var PCrn: mM {pub: in};
    CRn = PCrn_tot-PCrn;
  enddef;

  def comp CRg as
    var CRg: mM {pub: out};
    var PCrg_tot: mM {init: 5.0};
    var PCrg: mM {pub: in};
    CRg = PCrg_tot-PCrg;
  enddef;

  def comp ADPn as
    var ADPn: mM {pub: out};
    var ATPn: mM {pub: in};
    var ATPtot: mM {pub: in};
    var qak: dimensionless {pub: in};
    ADPn = ATPn/2{dimensionless}*(-qak+sqrt(sqr(qak)+4{dimensionless}*qak*(ATPtot/ATPn-1{dimensionless})));
  enddef;

  def comp ADPg as
    var ADPg: mM {pub: out};
    var ATPg: mM {pub: in};
    var ATPtot: mM {pub: in};
    var qak: dimensionless {pub: in};
    ADPg = ATPg/2{dimensionless}*(-qak+sqrt(sqr(qak)+4{dimensionless}*qak*(ATPtot/ATPg-1{dimensionless})));
  enddef;

  def comp u_n as
    var u_n: dimensionless {pub: out};
    var ATPn: mM {pub: in};
    var ATPtot: mM {pub: in};
    var qak: dimensionless {pub: in};
    u_n = sqr(qak)+4{dimensionless}*qak*(ATPtot/ATPn-1{dimensionless});
  enddef;

  def comp u_g as
    var u_g: dimensionless {pub: out};
    var ATPg: mM {pub: in};
    var ATPtot: mM {pub: in};
    var qak: dimensionless {pub: in};
    u_g = sqr(qak)+4{dimensionless}*qak*(ATPtot/ATPg-1{dimensionless});
  enddef;

  def comp dAMP_dATPn as
    var dAMP_dATPn: dimensionless {pub: out};
    var ATPn: mM {pub: in};
    var ATPtot: mM {pub: in};
    var u_n: dimensionless {pub: in};
    var qak: dimensionless {pub: in};
    dAMP_dATPn = qak/2{dimensionless}+qak*(ATPtot/(ATPn*sqrt(u_n)))-(1{dimensionless}+0.5{dimensionless}*sqrt(u_n));
  enddef;

  def comp dAMP_dATPg as
    var dAMP_dATPg: dimensionless {pub: out};
    var ATPg: mM {pub: in};
    var ATPtot: mM {pub: in};
    var u_g: dimensionless {pub: in};
    var qak: dimensionless {pub: in};
    dAMP_dATPg = qak/2{dimensionless}+qak*(ATPtot/(ATPg*sqrt(u_g)))-(1{dimensionless}+0.5{dimensionless}*sqrt(u_g));
  enddef;

  def comp AMPn as
    var AMPn: mM {pub: out};
    var ATPtot: mM {pub: in};
    var ATPn: mM {pub: in};
    var ADPn: mM {pub: in};
    AMPn = ATPtot-(ATPn+ADPn);
  enddef;

  def comp AMPg as
    var AMPg: mM {pub: out};
    var ATPtot: mM {pub: in};
    var ATPg: mM {pub: in};
    var ADPg: mM {pub: in};
    AMPg = ATPtot-(ATPg+ADPg);
  enddef;

  def comp BOLD as
    var BOLD: dimensionless;
    var Vv0: dimensionless {pub: in};
    var k1: dimensionless {pub: in};
    var k2: dimensionless {pub: in};
    var k3: dimensionless {pub: in};
    var Vv: dimensionless {pub: in};
    var dHb: mM {pub: in};
    var dHb0: mM {pub: in};
    BOLD = Vv0*((k1+k2)*(1{dimensionless}-dHb/dHb0)-(k2+k3)*(1{dimensionless}-Vv/Vv0));
  enddef;

  def comp v_stim as
    var v_stim: mM_per_s {pub: out};
    var unitpulseSB: dimensionless;
    var stim: dimensionless {pub: in};
    var to: s {pub: in};
    var tend: s {pub: in};
    var t_n_stim: s {pub: in};
    var v1_n: mM_per_s {pub: in};
    var v2_n: mM_per_s {pub: in};
    var time: s {pub: in};
    v_stim = stim*(v1_n+v2_n*((time-to)/t_n_stim)*exp(-((time-to)*(unitpulseSB/t_n_stim))))*unitpulseSB;
    unitpulseSB = sel
      case (time >= to) and (time <= to+tend):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
  enddef;

  def comp unitstepSB as
    var unitstepSB: dimensionless {pub: out};
    var to: s {pub: in};
    var tend: s {pub: in};
    var time: s {pub: in};
    unitstepSB = sel
      case time-(tend+to) >= 0{second}:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
  enddef;

  def comp model_parameters as
    var Km_PYR: mM {init: 0.0632, pub: out};
    var Km_ATP: mM {init: 0.01532, pub: out};
    var Ki_ATP: mM {init: 0.7595, pub: out};
    var Km_ADP: mM {init: 0.00107, pub: out};
    var Km_O2: mM {init: 0.0029658, pub: out};
    var Km_GLC: mM {init: 0.105, pub: out};
    var Km_GLU: mM {init: 0.05, pub: out};
    var Km_G6P: mM {init: 0.5, pub: out};
    var Km_F6P_pgi: mM {init: 0.06, pub: out};
    var Km_F6P_pfk: mM {init: 0.18, pub: out};
    var Km_pump: mM {init: 0.4243, pub: out};
    var nh_O2: dimensionless {init: 2.7, pub: out};
    var Ko2: mM {init: 0.089733, pub: out};
    var kpump: cm_per_mM_per_s {init: 3.17e-7, pub: out};
    var ATPtot: mM {init: 2.379, pub: out};
    var NAe: mM {init: 150.0, pub: out};
    var nH: dimensionless {init: 4.0, pub: out};
    var O2a: mM {init: 8.34, pub: out};
    var CO2a: mM {init: 1.2, pub: out};
    var GLCa: mM {init: 4.8, pub: out};
    var LACa: mM {init: 0.313, pub: out};
    var nOP: dimensionless {init: 15.0, pub: out};
    var NAero: dimensionless {init: 3.0, pub: out};
    var Rng: dimensionless {init: 1.8, pub: out};
    var Reg: dimensionless {init: 0.8, pub: out};
    var Ren: dimensionless {init: 0.4444444444444444, pub: out};
    var Rcn: dimensionless {init: 0.01222, pub: out};
    var Rcg: dimensionless {init: 0.022, pub: out};
    var Rce: dimensionless {init: 0.0275, pub: out};
    var Sm_n: per_cm {init: 40500, pub: out};
    var Vm: mV {init: -70, pub: out};
    var RT: mV_C_per_mol {init: 2577340, pub: out};
    var F: C_per_mole {init: 96500, pub: out};
    var Vn: dimensionless {init: 0.45, pub: out};
    var G6P_inh_hk: mM {init: 0.6, pub: out};
    var aG6P_inh_hk: dimensionless {init: 20.0, pub: out};
    var rATP_mito: dimensionless {init: 20.0, pub: out};
    var aATP_mito: dimensionless {init: 5.0, pub: out};
    var HbOP: mM {init: 8.6, pub: out};
    var Sm_g: per_cm {init: 10500, pub: out};
    var Vg: dimensionless {init: 0.25, pub: out};
    var KO1: dimensionless {init: 1.0, pub: out};
    var Vc: dimensionless {init: 0.0055, pub: out};
    var R_GLU_NA: dimensionless {init: 0.075, pub: out};
    var KO2: dimensionless {init: 1, pub: out};
    var KO3: dimensionless {init: 1, pub: out};
    var GLY_inh: mM {init: 4.2, pub: out};
    var aGLY_inh: dimensionless {init: 20.0, pub: out};
    var CBF0: per_s {init: 0.012, pub: out};
    var Vv0: dimensionless {init: 0.0236, pub: out};
    var tv: s {init: 35.0, pub: out};
    var qak: dimensionless {init: 0.92, pub: out};
    var k1: dimensionless {init: 2.22, pub: out};
    var k2: dimensionless {init: 0.46, pub: out};
    var k3: dimensionless {init: 0.43, pub: out};
    var dHb0: mM {init: 0.064, pub: out};
    var stim: dimensionless {init: 1, pub: out};
    var to: s {init: 200, pub: out};
    var tend: s {init: 300, pub: out};
    var v1_n: mM_per_s {init: 0.041, pub: out};
    var v2_n: mM_per_s {init: 2.55, pub: out};
    var t_n_stim: s {init: 2, pub: out};
    var sr: dimensionless {init: 4.59186, pub: out};
    var t1: s {init: 2, pub: out};
    var delta_GLY: dimensionless {init: 62, pub: out};
    var deltaf: dimensionless {init: 0.42, pub: out};
    var tend_GLY: s {init: 440, pub: out};
    var to_GLY: s {init: 83, pub: out};
    var sr_GLY: dimensionless {init: 4, pub: out};
  enddef;
  def map between NAn and environment for
    vars time and time;
  enddef;
  def map between GLCn and environment for
    vars time and time;
  enddef;
  def map between G6Pn and environment for
    vars time and time;
  enddef;
  def map between F6Pn and environment for
    vars time and time;
  enddef;
  def map between GAPn and environment for
    vars time and time;
  enddef;
  def map between PEPn and environment for
    vars time and time;
  enddef;
  def map between PYRn and environment for
    vars time and time;
  enddef;
  def map between LACn and environment for
    vars time and time;
  enddef;
  def map between NADHn and environment for
    vars time and time;
  enddef;
  def map between ATPn and environment for
    vars time and time;
  enddef;
  def map between PCrn and environment for
    vars time and time;
  enddef;
  def map between O2n and environment for
    vars time and time;
  enddef;
  def map between GLUn and environment for
    vars time and time;
  enddef;
  def map between NAg and environment for
    vars time and time;
  enddef;
  def map between GLCg and environment for
    vars time and time;
  enddef;
  def map between G6Pg and environment for
    vars time and time;
  enddef;
  def map between F6Pg and environment for
    vars time and time;
  enddef;
  def map between GAPg and environment for
    vars time and time;
  enddef;
  def map between PEPg and environment for
    vars time and time;
  enddef;
  def map between PYRg and environment for
    vars time and time;
  enddef;
  def map between LACg and environment for
    vars time and time;
  enddef;
  def map between NADHg and environment for
    vars time and time;
  enddef;
  def map between ATPg and environment for
    vars time and time;
  enddef;
  def map between PCrg and environment for
    vars time and time;
  enddef;
  def map between O2g and environment for
    vars time and time;
  enddef;
  def map between GLYg and environment for
    vars time and time;
  enddef;
  def map between GLUg and environment for
    vars time and time;
  enddef;
  def map between GLCe and environment for
    vars time and time;
  enddef;
  def map between LACe and environment for
    vars time and time;
  enddef;
  def map between GLUe and environment for
    vars time and time;
  enddef;
  def map between O2c and environment for
    vars time and time;
  enddef;
  def map between GLCc and environment for
    vars time and time;
  enddef;
  def map between LACc and environment for
    vars time and time;
  enddef;
  def map between CO2c and environment for
    vars time and time;
  enddef;
  def map between Vv and environment for
    vars time and time;
  enddef;
  def map between dHb and environment for
    vars time and time;
  enddef;
  def map between Vg_glyp and environment for
    vars time and time;
  enddef;
  def map between v_stim and environment for
    vars time and time;
  enddef;
  def map between unitstepSB and environment for
    vars time and time;
  enddef;
  def map between Fin_t and environment for
    vars time and time;
  enddef;
  def map between Vn_leak_Na and NAn for
    vars Vn_leak_Na and Vn_leak_Na;
    vars NAn and NAn;
  enddef;
  def map between Vn_pump and NAn for
    vars Vn_pump and Vn_pump;
    vars NAn and NAn;
  enddef;
  def map between Vn_stim and NAn for
    vars Vn_stim and Vn_stim;
  enddef;
  def map between V_en_GLC and GLCn for
    vars V_en_GLC and V_en_GLC;
    vars GLCn and GLCn;
  enddef;
  def map between Vn_hk and GLCn for
    vars Vn_hk and Vn_hk;
    vars GLCn and GLCn;
  enddef;
  def map between Vn_pgi and G6Pn for
    vars Vn_pgi and Vn_pgi;
    vars G6Pn and G6Pn;
  enddef;
  def map between Vn_hk and G6Pn for
    vars Vn_hk and Vn_hk;
    vars G6Pn and G6Pn;
  enddef;
  def map between Vn_pgi and F6Pn for
    vars Vn_pgi and Vn_pgi;
    vars F6Pn and F6Pn;
  enddef;
  def map between Vn_pfk and F6Pn for
    vars Vn_pfk and Vn_pfk;
    vars F6Pn and F6Pn;
  enddef;
  def map between Vn_pgk and GAPn for
    vars Vn_pgk and Vn_pgk;
    vars GAPn and GAPn;
  enddef;
  def map between Vn_pfk and GAPn for
    vars Vn_pfk and Vn_pfk;
  enddef;
  def map between Vn_pk and PEPn for
    vars Vn_pk and Vn_pk;
    vars PEPn and PEPn;
  enddef;
  def map between Vn_pgk and PEPn for
    vars Vn_pgk and Vn_pgk;
  enddef;
  def map between Vn_pk and PYRn for
    vars Vn_pk and Vn_pk;
  enddef;
  def map between Vn_ldh and PYRn for
    vars Vn_ldh and Vn_ldh;
    vars PYRn and PYRn;
  enddef;
  def map between Vn_mito and PYRn for
    vars Vn_mito and Vn_mito;
    vars PYRn and PYRn;
  enddef;
  def map between Vn_ldh and LACn for
    vars Vn_ldh and Vn_ldh;
    vars LACn and LACn;
  enddef;
  def map between Vne_LAC and LACn for
    vars Vne_LAC and Vne_LAC;
    vars LACn and LACn;
  enddef;
  def map between Vn_pgk and NADHn for
    vars Vn_pgk and Vn_pgk;
    vars NADHn and NADHn;
  enddef;
  def map between Vn_ldh and NADHn for
    vars Vn_ldh and Vn_ldh;
    vars NADHn and NADHn;
  enddef;
  def map between Vn_mito and NADHn for
    vars Vn_mito and Vn_mito;
  enddef;
  def map between model_parameters and ATPn for
    vars nOP and nOP;
  enddef;
  def map between dAMP_dATPn and ATPn for
    vars ATPn and ATPn;
    vars dAMP_dATPn and dAMP_dATPn;
  enddef;
  def map between Vn_hk and ATPn for
    vars Vn_hk and Vn_hk;
    vars ATPn and ATPn;
  enddef;
  def map between Vn_pfk and ATPn for
    vars Vn_pfk and Vn_pfk;
    vars ATPn and ATPn;
  enddef;
  def map between Vn_pgk and ATPn for
    vars Vn_pgk and Vn_pgk;
  enddef;
  def map between Vn_pk and ATPn for
    vars Vn_pk and Vn_pk;
  enddef;
  def map between Vn_ATPase and ATPn for
    vars Vn_ATPase and Vn_ATPase;
    vars ATPn and ATPn;
  enddef;
  def map between Vn_pump and ATPn for
    vars Vn_pump and Vn_pump;
    vars ATPn and ATPn;
  enddef;
  def map between Vn_mito and ATPn for
    vars Vn_mito and Vn_mito;
    vars ATPn and ATPn;
  enddef;
  def map between Vn_ck and ATPn for
    vars Vn_ck and Vn_ck;
    vars ATPn and ATPn;
  enddef;
  def map between Vn_ck and PCrn for
    vars Vn_ck and Vn_ck;
    vars PCrn and PCrn;
  enddef;
  def map between model_parameters and O2n for
    vars NAero and NAero;
  enddef;
  def map between Vn_mito and O2n for
    vars Vn_mito and Vn_mito;
    vars O2n and O2n;
  enddef;
  def map between Vcn_O2 and O2n for
    vars Vcn_O2 and Vcn_O2;
    vars O2n and O2n;
  enddef;
  def map between model_parameters and GLUn for
    vars Rng and Rng;
  enddef;
  def map between Vg_gs and GLUn for
    vars Vg_gs and Vg_gs;
  enddef;
  def map between Vn_stim_GLU and GLUn for
    vars Vn_stim_GLU and Vn_stim_GLU;
    vars GLUn and GLUn;
  enddef;
  def map between Vg_leak_Na and NAg for
    vars Vg_leak_Na and Vg_leak_Na;
    vars NAg and NAg;
  enddef;
  def map between Vg_pump and NAg for
    vars Vg_pump and Vg_pump;
    vars NAg and NAg;
  enddef;
  def map between Veg_GLU and NAg for
    vars Veg_GLU and Veg_GLU;
  enddef;
  def map between Veg_GLC and GLCg for
    vars Veg_GLC and Veg_GLC;
    vars GLCg and GLCg;
  enddef;
  def map between Vcg_GLC and GLCg for
    vars Vcg_GLC and Vcg_GLC;
    vars GLCg and GLCg;
  enddef;
  def map between Vg_hk and GLCg for
    vars Vg_hk and Vg_hk;
    vars GLCg and GLCg;
  enddef;
  def map between Vg_pgi and G6Pg for
    vars Vg_pgi and Vg_pgi;
    vars G6Pg and G6Pg;
  enddef;
  def map between Vg_hk and G6Pg for
    vars Vg_hk and Vg_hk;
    vars G6Pg and G6Pg;
  enddef;
  def map between Vg_glys and G6Pg for
    vars Vg_glys and Vg_glys;
    vars G6Pg and G6Pg;
  enddef;
  def map between Vg_glyp and G6Pg for
    vars Vg_glyp and Vg_glyp;
  enddef;
  def map between Vg_pgi and F6Pg for
    vars Vg_pgi and Vg_pgi;
    vars F6Pg and F6Pg;
  enddef;
  def map between Vg_pfk and F6Pg for
    vars Vg_pfk and Vg_pfk;
    vars F6Pg and F6Pg;
  enddef;
  def map between Vg_pfk and GAPg for
    vars Vg_pfk and Vg_pfk;
  enddef;
  def map between Vg_pk and PEPg for
    vars Vg_pk and Vg_pk;
    vars PEPg and PEPg;
  enddef;
  def map between Vg_pgk and PEPg for
    vars Vg_pgk and Vg_pgk;
  enddef;
  def map between Vg_pk and PYRg for
    vars Vg_pk and Vg_pk;
  enddef;
  def map between Vg_ldh and PYRg for
    vars Vg_ldh and Vg_ldh;
    vars PYRg and PYRg;
  enddef;
  def map between Vg_mito and PYRg for
    vars Vg_mito and Vg_mito;
    vars PYRg and PYRg;
  enddef;
  def map between Vg_ldh and LACg for
    vars Vg_ldh and Vg_ldh;
    vars LACg and LACg;
  enddef;
  def map between Vge_LAC and LACg for
    vars Vge_LAC and Vge_LAC;
    vars LACg and LACg;
  enddef;
  def map between Vgc_LAC and LACg for
    vars Vgc_LAC and Vgc_LAC;
    vars LACg and LACg;
  enddef;
  def map between Vg_pgk and NADHg for
    vars Vg_pgk and Vg_pgk;
    vars NADHg and NADHg;
  enddef;
  def map between Vg_ldh and NADHg for
    vars Vg_ldh and Vg_ldh;
    vars NADHg and NADHg;
  enddef;
  def map between Vg_mito and NADHg for
    vars Vg_mito and Vg_mito;
  enddef;
  def map between model_parameters and ATPg for
    vars nOP and nOP;
  enddef;
  def map between dAMP_dATPg and ATPg for
    vars ATPg and ATPg;
    vars dAMP_dATPg and dAMP_dATPg;
  enddef;
  def map between Vg_hk and ATPg for
    vars Vg_hk and Vg_hk;
    vars ATPg and ATPg;
  enddef;
  def map between Vg_pgk and ATPg for
    vars Vg_pgk and Vg_pgk;
  enddef;
  def map between Vg_pfk and ATPg for
    vars Vg_pfk and Vg_pfk;
    vars ATPg and ATPg;
  enddef;
  def map between Vg_gs and ATPg for
    vars Vg_gs and Vg_gs;
    vars ATPg and ATPg;
  enddef;
  def map between Vg_pk and ATPg for
    vars Vg_pk and Vg_pk;
  enddef;
  def map between Vg_ATPase and ATPg for
    vars Vg_ATPase and Vg_ATPase;
    vars ATPg and ATPg;
  enddef;
  def map between Vg_pump and ATPg for
    vars Vg_pump and Vg_pump;
    vars ATPg and ATPg;
  enddef;
  def map between Vg_mito and ATPg for
    vars Vg_mito and Vg_mito;
    vars ATPg and ATPg;
  enddef;
  def map between Vg_ck and ATPg for
    vars Vg_ck and Vg_ck;
    vars ATPg and ATPg;
  enddef;
  def map between Vg_ck and PCrg for
    vars Vg_ck and Vg_ck;
    vars PCrg and PCrg;
  enddef;
  def map between model_parameters and O2g for
    vars NAero and NAero;
  enddef;
  def map between Vg_mito and O2g for
    vars Vg_mito and Vg_mito;
    vars O2g and O2g;
  enddef;
  def map between Vcg_O2 and O2g for
    vars Vcg_O2 and Vcg_O2;
    vars O2g and O2g;
  enddef;
  def map between Vg_glys and GLYg for
    vars Vg_glys and Vg_glys;
    vars GLYg and GLYg;
  enddef;
  def map between Vg_glyp and GLYg for
    vars Vg_glyp and Vg_glyp;
    vars GLYg and GLYg;
  enddef;
  def map between Vg_gs and GLUg for
    vars Vg_gs and Vg_gs;
    vars GLUg and GLUg;
  enddef;
  def map between Veg_GLU and GLUg for
    vars Veg_GLU and Veg_GLU;
  enddef;
  def map between model_parameters and GLCe for
    vars Reg and Reg;
    vars Ren and Ren;
  enddef;
  def map between Vce_GLC and GLCe for
    vars Vce_GLC and Vce_GLC;
    vars GLCe and GLCe;
  enddef;
  def map between Veg_GLC and GLCe for
    vars Veg_GLC and Veg_GLC;
    vars GLCe and GLCe;
  enddef;
  def map between V_en_GLC and GLCe for
    vars V_en_GLC and V_en_GLC;
    vars GLCe and GLCe;
  enddef;
  def map between model_parameters and LACe for
    vars Reg and Reg;
    vars Ren and Ren;
  enddef;
  def map between Vec_LAC and LACe for
    vars Vec_LAC and Vec_LAC;
    vars LACe and LACe;
  enddef;
  def map between Vge_LAC and LACe for
    vars Vge_LAC and Vge_LAC;
    vars LACe and LACe;
  enddef;
  def map between Vne_LAC and LACe for
    vars Vne_LAC and Vne_LAC;
    vars LACe and LACe;
  enddef;
  def map between model_parameters and GLUe for
    vars Reg and Reg;
    vars Ren and Ren;
  enddef;
  def map between Veg_GLU and GLUe for
    vars Veg_GLU and Veg_GLU;
    vars GLUe and GLUe;
  enddef;
  def map between Vn_stim_GLU and GLUe for
    vars Vn_stim_GLU and Vn_stim_GLU;
  enddef;
  def map between model_parameters and O2c for
    vars Rcg and Rcg;
    vars Rcn and Rcn;
  enddef;
  def map between Vc_O2 and O2c for
    vars Vc_O2 and Vc_O2;
    vars O2c and O2c;
  enddef;
  def map between Vcn_O2 and O2c for
    vars Vcn_O2 and Vcn_O2;
    vars O2c and O2c;
  enddef;
  def map between Vcg_O2 and O2c for
    vars Vcg_O2 and Vcg_O2;
    vars O2c and O2c;
  enddef;
  def map between model_parameters and GLCc for
    vars Rcg and Rcg;
    vars Rce and Rce;
  enddef;
  def map between Vc_GLC and GLCc for
    vars Vc_GLC and Vc_GLC;
    vars GLCc and GLCc;
  enddef;
  def map between Vce_GLC and GLCc for
    vars Vce_GLC and Vce_GLC;
    vars GLCc and GLCc;
  enddef;
  def map between Vcg_GLC and GLCc for
    vars Vcg_GLC and Vcg_GLC;
    vars GLCc and GLCc;
  enddef;
  def map between model_parameters and LACc for
    vars Rcg and Rcg;
    vars Rce and Rce;
  enddef;
  def map between Vc_LAC and LACc for
    vars Vc_LAC and Vc_LAC;
    vars LACc and LACc;
  enddef;
  def map between Vec_LAC and LACc for
    vars Vec_LAC and Vec_LAC;
    vars LACc and LACc;
  enddef;
  def map between Vgc_LAC and LACc for
    vars Vgc_LAC and Vgc_LAC;
    vars LACc and LACc;
  enddef;
  def map between model_parameters and CO2c for
    vars Rcg and Rcg;
    vars Rcn and Rcn;
  enddef;
  def map between Vc_CO2 and CO2c for
    vars Vc_CO2 and Vc_CO2;
    vars CO2c and CO2c;
  enddef;
  def map between Vnc_CO2 and CO2c for
    vars Vnc_CO2 and Vnc_CO2;
  enddef;
  def map between Vgc_CO2 and CO2c for
    vars Vgc_CO2 and Vgc_CO2;
  enddef;
  def map between Fin_t and Vv for
    vars Fin_t and Fin_t;
  enddef;
  def map between Fout_t and Vv for
    vars Fout_t and Fout_t;
    vars Vv and Vv;
  enddef;
  def map between Fin_t and dHb for
    vars Fin_t and Fin_t;
  enddef;
  def map between Fout_t and dHb for
    vars Fout_t and Fout_t;
  enddef;
  def map between Vv and dHb for
    vars Vv and Vv;
  enddef;
  def map between O2c and dHb for
    vars O2c and O2c;
  enddef;
  def map between model_parameters and dHb for
    vars O2a and O2a;
  enddef;
  def map between model_parameters and Vn_leak_Na for
    vars Sm_n and Sm_n;
    vars Vm and Vm;
    vars Vn and Vn;
    vars RT and RT;
    vars F and F;
    vars NAe and NAe;
  enddef;
  def map between model_parameters and Vn_pump for
    vars Sm_n and Sm_n;
    vars Vn and Vn;
    vars kpump and kpump;
    vars Km_pump and Km_pump;
  enddef;
  def map between v_stim and Vn_stim for
    vars v_stim and v_stim;
  enddef;
  def map between model_parameters and Vn_hk for
    vars Km_GLC and Km_GLC;
    vars G6P_inh_hk and G6P_inh_hk;
    vars aG6P_inh_hk and aG6P_inh_hk;
  enddef;
  def map between model_parameters and Vn_pgi for
    vars Km_G6P and Km_G6P;
    vars Km_F6P_pgi and Km_F6P_pgi;
  enddef;
  def map between model_parameters and Vn_pfk for
    vars Km_F6P_pfk and Km_F6P_pfk;
    vars Ki_ATP and Ki_ATP;
    vars nH and nH;
  enddef;
  def map between ADPn and Vn_pgk for
    vars ADPn and ADPn;
  enddef;
  def map between NADn and Vn_pgk for
    vars NADn and NADn;
  enddef;
  def map between ADPn and Vn_pk for
    vars ADPn and ADPn;
  enddef;
  def map between NADn and Vn_ldh for
    vars NADn and NADn;
  enddef;
  def map between ADPn and Vn_mito for
    vars ADPn and ADPn;
  enddef;
  def map between model_parameters and Vn_mito for
    vars Km_O2 and Km_O2;
    vars Km_ADP and Km_ADP;
    vars Km_PYR and Km_PYR;
    vars rATP_mito and rATP_mito;
    vars aATP_mito and aATP_mito;
  enddef;
  def map between ADPn and Vn_ck for
    vars ADPn and ADPn;
  enddef;
  def map between CRn and Vn_ck for
    vars CRn and CRn;
  enddef;
  def map between model_parameters and Vcn_O2 for
    vars Ko2 and Ko2;
    vars Vn and Vn;
    vars HbOP and HbOP;
  enddef;
  def map between model_parameters and Vg_leak_Na for
    vars Sm_g and Sm_g;
    vars Vm and Vm;
    vars Vg and Vg;
    vars RT and RT;
    vars F and F;
    vars NAe and NAe;
  enddef;
  def map between model_parameters and Vg_pump for
    vars Sm_g and Sm_g;
    vars Vg and Vg;
    vars kpump and kpump;
    vars Km_pump and Km_pump;
  enddef;
  def map between model_parameters and Veg_GLC for
    vars KO1 and KO1;
  enddef;
  def map between model_parameters and Vg_hk for
    vars Km_GLC and Km_GLC;
    vars G6P_inh_hk and G6P_inh_hk;
    vars aG6P_inh_hk and aG6P_inh_hk;
  enddef;
  def map between model_parameters and Vg_pgi for
    vars Km_G6P and Km_G6P;
    vars Km_F6P_pgi and Km_F6P_pgi;
  enddef;
  def map between model_parameters and Vg_pfk for
    vars Km_F6P_pfk and Km_F6P_pfk;
    vars Ki_ATP and Ki_ATP;
    vars nH and nH;
  enddef;
  def map between NADg and Vg_pgk for
    vars NADg and NADg;
  enddef;
  def map between NADg and Vg_ldh for
    vars NADg and NADg;
  enddef;
  def map between model_parameters and Vg_mito for
    vars Km_O2 and Km_O2;
    vars Km_ADP and Km_ADP;
    vars Km_PYR and Km_PYR;
    vars rATP_mito and rATP_mito;
    vars aATP_mito and aATP_mito;
  enddef;
  def map between ADPg and Vg_mito for
    vars ADPg and ADPg;
  enddef;
  def map between ADPg and Vg_ck for
    vars ADPg and ADPg;
  enddef;
  def map between ADPg and Vg_pk for
    vars ADPg and ADPg;
  enddef;
  def map between ADPg and Vg_pgk for
    vars ADPg and ADPg;
  enddef;
  def map between GAPg and Vg_pgk for
    vars GAPg and GAPg;
    vars Vg_pgk and Vg_pgk;
  enddef;
  def map between CRg and Vg_ck for
    vars CRg and CRg;
  enddef;
  def map between model_parameters and Vcg_O2 for
    vars Ko2 and Ko2;
    vars Vg and Vg;
    vars nh_O2 and nh_O2;
    vars HbOP and HbOP;
  enddef;
  def map between Fin_t and Vc_O2 for
    vars Fin_t and Fin_t;
  enddef;
  def map between model_parameters and Vc_O2 for
    vars O2a and O2a;
    vars Vc and Vc;
  enddef;
  def map between Fin_t and Vc_GLC for
    vars Fin_t and Fin_t;
  enddef;
  def map between model_parameters and Vc_GLC for
    vars GLCa and GLCa;
    vars Vc and Vc;
  enddef;
  def map between Fin_t and Vc_LAC for
    vars Fin_t and Fin_t;
  enddef;
  def map between model_parameters and Vc_LAC for
    vars LACa and LACa;
    vars Vc and Vc;
  enddef;
  def map between Vn_mito and Vnc_CO2 for
    vars Vn_mito and Vn_mito;
  enddef;
  def map between Vg_mito and Vgc_CO2 for
    vars Vg_mito and Vg_mito;
  enddef;
  def map between model_parameters and Vn_stim_GLU for
    vars Km_GLU and Km_GLU;
    vars KO2 and KO2;
    vars R_GLU_NA and R_GLU_NA;
  enddef;
  def map between Vn_stim and Vn_stim_GLU for
    vars Vn_stim and Vn_stim;
  enddef;
  def map between model_parameters and Vg_gs for
    vars Km_GLU and Km_GLU;
    vars Km_ATP and Km_ATP;
  enddef;
  def map between model_parameters and Veg_GLU for
    vars Km_GLU and Km_GLU;
  enddef;
  def map between Fin_t and Vc_CO2 for
    vars Fin_t and Fin_t;
  enddef;
  def map between model_parameters and Vc_CO2 for
    vars CO2a and CO2a;
    vars Vc and Vc;
  enddef;
  def map between model_parameters and Vg_glys for
    vars GLY_inh and GLY_inh;
    vars aGLY_inh and aGLY_inh;
  enddef;
  def map between model_parameters and Vg_glyp for
    vars KO3 and KO3;
    vars stim and stim;
    vars to and to;
    vars to_GLY and to_GLY;
    vars tend_GLY and tend_GLY;
    vars sr_GLY and sr_GLY;
    vars t1 and t1;
    vars delta_GLY and delta_GLY;
  enddef;
  def map between unitstepSB2 and Vg_glyp for
    vars unitstepSB2 and unitstepSB2;
  enddef;
  def map between model_parameters and v_stim for
    vars stim and stim;
    vars to and to;
    vars tend and tend;
    vars t_n_stim and t_n_stim;
    vars v1_n and v1_n;
    vars v2_n and v2_n;
  enddef;
  def map between model_parameters and Fin_t for
    vars stim and stim;
    vars to and to;
    vars tend and tend;
    vars sr and sr;
    vars t1 and t1;
    vars deltaf and deltaf;
  enddef;
  def map between model_parameters and unitstepSB for
    vars to and to;
    vars tend and tend;
  enddef;
  def map between Fin_t and Fout_t for
    vars Fin_t and Fin_t;
  enddef;
  def map between model_parameters and Fout_t for
    vars CBF0 and CBF0;
    vars Vv0 and Vv0;
    vars tv and tv;
  enddef;
  def map between NADHn and NADn for
    vars NADHn and NADHn;
  enddef;
  def map between NADHg and NADg for
    vars NADHg and NADHg;
  enddef;
  def map between PCrn and CRn for
    vars PCrn and PCrn;
  enddef;
  def map between PCrg and CRg for
    vars PCrg and PCrg;
  enddef;
  def map between ATPn and ADPn for
    vars ATPn and ATPn;
  enddef;
  def map between model_parameters and ADPn for
    vars ATPtot and ATPtot;
    vars qak and qak;
  enddef;
  def map between ATPg and ADPg for
    vars ATPg and ATPg;
  enddef;
  def map between model_parameters and ADPg for
    vars ATPtot and ATPtot;
    vars qak and qak;
  enddef;
  def map between ATPn and u_n for
    vars ATPn and ATPn;
  enddef;
  def map between model_parameters and u_n for
    vars ATPtot and ATPtot;
    vars qak and qak;
  enddef;
  def map between ATPg and u_g for
    vars ATPg and ATPg;
  enddef;
  def map between model_parameters and u_g for
    vars ATPtot and ATPtot;
    vars qak and qak;
  enddef;
  def map between u_n and dAMP_dATPn for
    vars u_n and u_n;
  enddef;
  def map between model_parameters and dAMP_dATPn for
    vars ATPtot and ATPtot;
    vars qak and qak;
  enddef;
  def map between u_g and dAMP_dATPg for
    vars u_g and u_g;
  enddef;
  def map between model_parameters and dAMP_dATPg for
    vars ATPtot and ATPtot;
    vars qak and qak;
  enddef;
  def map between ATPn and AMPn for
    vars ATPn and ATPn;
  enddef;
  def map between ADPn and AMPn for
    vars ADPn and ADPn;
  enddef;
  def map between model_parameters and AMPn for
    vars ATPtot and ATPtot;
  enddef;
  def map between ATPg and AMPg for
    vars ATPg and ATPg;
  enddef;
  def map between ADPg and AMPg for
    vars ADPg and ADPg;
  enddef;
  def map between model_parameters and AMPg for
    vars ATPtot and ATPtot;
  enddef;
  def map between model_parameters and BOLD for
    vars Vv0 and Vv0;
    vars k1 and k1;
    vars k2 and k2;
    vars k3 and k3;
    vars dHb0 and dHb0;
  enddef;
  def map between dHb and BOLD for
    vars dHb and dHb;
  enddef;
  def map between Vv and BOLD for
    vars Vv and Vv;
  enddef;
  def unit mV_C_per_mol as
    unit mV;
    unit C_per_mole;
  enddef;

  def comp unitstepSB2 as
    var unitstepSB2: dimensionless {pub: out};
    var tend: s {pub: in};
    var time: s {pub: in};
    unitstepSB2 = sel
      case time-(tend_GLY+to+to_GLY) >= 0{second}:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    var to: s {pub: in};
    var tend_GLY: s {pub: in};
    var to_GLY: s {pub: in};
  enddef;
  def map between unitstepSB2 and environment for
    vars time and time;
  enddef;
  def map between unitstepSB2 and model_parameters for
    vars to and to;
    vars tend and tend;
    vars tend_GLY and tend_GLY;
    vars to_GLY and to_GLY;
  enddef;
enddef;
