//   FILE :  cortassa_model_2004.xml
//
// CREATED :  28th September 2004
//
// LAST MODIFIED : 28th September 2004
//
// AUTHOR :  Catherine Lloyd
//           Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Cortassa et al.'s 2004 mathematical model of a mitochondrial oscillator which is dependent on Reactive Oxygen Species.
//
// CHANGES:
// created: W3CDTF 2004-09-28T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2009-04-30T10:21:14+12:00; Added initial conditions for the metabolites. Added a concentration for GLU (glutamate) - this is temporary until the model author confirms the value they used in the original model. Added a value for "ni" in V_IDH (again this is temporary until the model author confirms the value they used in the original model). Kf_AAT is 2nd order not 1st order (in order to balance units). Similarly, Ke_SL and KF1 are mM not dimensionless in order to balance the units. Also added a component for NADPH as it is required in the equation for V_CAT (we are awaiting confirmation from the model author for the actual concentration of this variable). "fr" in V_CAT was changed from dimensionless to mM-1 in order to balance the units.; Given Catherine; Family Lloyd; Other May
// reference: subject_type keyword; cardiac; mitochondria; metabolism
// reference: Pubmed_id 15345581; Given Sonia; Family Cortassa; Given Miguel; Family Aon; Other A; Given Raimond; Family Winslow; Other L; Given Brian; Family O'Rourke; title A mitochondrial oscillator dependent on reactive oxygen species; volume 87; first_page 2060; title Biophysical Journal; W3CDTF 2004-09-00 00:00; last_page 2073
// comment: FN Catherine Lloyd; This CellML model has been checked in both OpenCell and COR and the units are consistent. Unfortunately the model will not integrate at the moment. We are working with the model author to complete the curation of this model.
def model cortassa_2004 as
  // Modelling Mitochondrial Energy Metabolism
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model has been checked in both OpenCell and COR and the units are consistent. Unfortunately the model will not integrate at the moment. We are working with the model author to complete the curation of this model.
  //
  // Model Structure
  //
  // ABSTRACT: We describe a unique mitochondrial oscillator that depends on oxidative phosphorylation, reactive oxygen species (ROS), and mitochondrial inner membrane ion channels. Cell-wide synchronized oscillations in mitochondrial membrane potential (Delta Psi(m)), NADH, and ROS production have been recently described in isolated cardiomyocytes, and we have hypothesized that the balance between superoxide anion efflux through inner membrane anion channels and the intracellular ROS scavenging capacity play a key role in the oscillatory mechanism. Here, we formally test the hypothesis using a computational model of mitochondrial energetics and Ca(2+) handling including mitochondrial ROS production, cytoplasmic ROS scavenging, and ROS activation of inner membrane anion flux. The mathematical model reproduces the period and phase of the observed oscillations in Delta Psi(m), NADH, and ROS. Moreover, we experimentally verify model predictions that the period of the oscillator can be modulated by altering the concentration of ROS scavengers or the rate of oxidative phosphorylation, and that the redox state of the glutathione pool oscillates. In addition to its role in cellular dysfunction during metabolic stress, the period of the oscillator can be shown to span a wide range, from milliseconds to hours, suggesting that it may also be a mechanism for physiological timekeeping and/or redox signaling.
  //
  // The original paper reference is cited below:
  //
  // A Mitochondrial Oscillator Dependent on Reactive Oxygen Species, Sonia Cortassa, Miguel A. Aon, Raimond L. Winslow, and Brian O'Rourke, 2004, Biophysical Journal, 87, 2060-2073.PubMed ID: 15345581 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=15345581&dopt=Abstract)
  //
  // reaction diagram
  //
  // Figure 1. A schematic diagram of mitochondrial energetics coupled to ROS production, transport, and scavenging. These processes are described by the equations in Cortassa et al.'s 2004 mathematical model
  //
  // reaction diagram
  //
  // Figure 2. A schematic diagram of the reactions used in the model of the glycogenolysis pathway in skeletal muscle.
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar_per_volt as
    unit millimolar;
    unit volt {expo: -1};
  enddef;
  def unit per_volt as
    unit volt {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit micromolar_per_second as
    unit micromolar;
    unit second {expo: -1};
  enddef;
  def unit micromolar_per_millimolar as
    unit micromolar;
    unit millimolar {expo: -1};
  enddef;
  def unit flux as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar_second as
    unit millimolar;
    unit second;
  enddef;
  def unit first_order_rate_constant as
    unit second {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_second_volt as
    unit millimolar;
    unit second {expo: -1};
    unit volt {expo: -1};
  enddef;
  def unit volt_coulomb_per_mole_kelvin as
    unit volt;
    unit coulomb;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  // title: ADP_m
  // alternative: mitochondrial adenosine diphosphate
  def comp ADP_m as
    var ADP_m: millimolar {pub: out, init: 0.1};
    var V_ANT: flux {pub: in};
    var V_ATPase: flux {pub: in};
    var V_SL: flux {pub: in};
    var time: second {pub: in};
    ode(ADP_m, time) = V_ANT-(V_ATPase+V_SL);
  enddef;

  // title: NADH
  // alternative: nicotinamide adenine dinucleotide
  def comp NADH as
    var NADH: millimolar {pub: out, init: 0.01};
    var V_O2: flux {pub: in};
    var V_IDH: flux {pub: in};
    var V_KGDH: flux {pub: in};
    var V_MDH: flux {pub: in};
    var time: second {pub: in};
    ode(NADH, time) = -V_O2+V_IDH+V_KGDH+V_MDH;
  enddef;

  // title: ISOC
  // alternative: isocitrate
  def comp ISOC as
    var ISOC: millimolar {pub: out, init: 0.01};
    var V_ACO: flux {pub: in};
    var V_IDH: flux {pub: in};
    var time: second {pub: in};
    ode(ISOC, time) = V_ACO-V_IDH;
  enddef;

  // title: alpha_KG
  // alternative: alpha-ketoglutarate
  def comp alpha_KG as
    var alpha_KG: millimolar {pub: out, init: 0.01};
    var V_IDH: flux {pub: in};
    var V_KGDH: flux {pub: in};
    var V_AAT: flux {pub: in};
    var time: second {pub: in};
    ode(alpha_KG, time) = V_AAT+V_IDH+(-V_KGDH);
  enddef;

  // title: SCoA
  // alternative: succinyl CoA
  def comp SCoA as
    var SCoA: millimolar {pub: out, init: 0.01};
    var V_KGDH: flux {pub: in};
    var V_SL: flux {pub: in};
    var time: second {pub: in};
    ode(SCoA, time) = V_KGDH-V_SL;
  enddef;

  // title: Suc
  // alternative: succinate
  def comp Suc as
    var Suc: millimolar {pub: out, init: 0.01};
    var V_SL: flux {pub: in};
    var V_SDH: flux {pub: in};
    var time: second {pub: in};
    ode(Suc, time) = V_SL-V_SDH;
  enddef;

  // title: FUM
  // alternative: fumarate
  def comp FUM as
    var FUM: millimolar {pub: out, init: 0.01};
    var V_SDH: flux {pub: in};
    var V_FH: flux {pub: in};
    var time: second {pub: in};
    ode(FUM, time) = V_SDH-V_FH;
  enddef;

  // title: MAL
  // alternative: malate
  def comp MAL as
    var MAL: millimolar {pub: out, init: 0.01};
    var V_FH: flux {pub: in};
    var V_MDH: flux {pub: in};
    var time: second {pub: in};
    ode(MAL, time) = V_FH-V_MDH;
  enddef;

  // title: OAA
  // alternative: oxaloacetate
  def comp OAA as
    var OAA: millimolar {pub: out, init: 0.01};
    var V_MDH: flux {pub: in};
    var V_CS: flux {pub: in};
    var V_AAT: flux {pub: in};
    var time: second {pub: in};
    ode(OAA, time) = V_MDH-(V_CS+V_AAT);
  enddef;

  // title: ASP
  // alternative: aspartate
  def comp ASP as
    var ASP: millimolar {pub: out, init: 0.01};
    var V_AAT: flux {pub: in};
    var V_C_ASP: flux {pub: in};
    var time: second {pub: in};
    ode(ASP, time) = V_AAT-V_C_ASP;
  enddef;

  // title: Ca_m
  // alternative: mitochondrial calcium
  def comp Ca_m as
    var Ca_m: micromolar {pub: out, init: 0.01};
    var f: dimensionless {init: 0.0003};
    var V_uni: flux {pub: in};
    var V_NaCa: flux {pub: in};
    var time: second {pub: in};
    ode(Ca_m, time) = f*1{micromolar_per_millimolar}*(V_uni-V_NaCa);
  enddef;

  // title: Ca_i
  // alternative: cytosolic calcium
  def comp Ca_i as
    var Ca_i: micromolar {pub: out};
    var stim_start: second {init: 0};
    var stim_end: second {init: 10000};
    var stim_period: second;
    var stim_duration: second {init: 0.4};
    var pulse_value: micromolar {init: 1};
    var time: second {pub: in};
    Ca_i = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        pulse_value;
      otherwise:
        0.1{micromolar};
    endsel;
    stim_period = sel
      case (time >= 100{second}) and (time < 300{second}):
        0.5{second};
      otherwise:
        4{second};
    endsel;
  enddef;

  // title: Na_i
  // alternative: cytosolic sodium
  def comp Na_i as
    var Na_i: millimolar {pub: out, init: 10.0};
  enddef;

  // title: ATP_i
  // alternative: cytosolic adenosine triphosphate
  def comp ATP_i as
    var ATP_i: millimolar {pub: out, init: 6.5};
  enddef;

  // title: ATP_m
  // alternative: mitochondrial adenosine triphosphate
  def comp ATP_m as
    var ATP_m: millimolar {pub: out};
    var Cm: millimolar {init: 15.0};
    var ADP_m: millimolar {pub: in};
    ATP_m = Cm-ADP_m;
  enddef;

  // title: ADP_i
  // alternative: cytosolic adenosine diphosphate
  def comp ADP_i as
    var ADP_i: millimolar {pub: out};
    var pulse_value: millimolar {init: 0.15};
    var time: second {pub: in};
    ADP_i = sel
      case (time >= 100{second}) and (time < 300{second}):
        pulse_value;
      otherwise:
        0.05{millimolar};
    endsel;
  enddef;

  // title: GLU
  // alternative: glutamate
  def comp GLU as
    var GLU: millimolar {pub: out, init: 20};
  enddef;

  // title: Mg
  // alternative: magnesium
  def comp Mg as
    var Mg: millimolar {pub: out, init: 0.4};
  enddef;

  // title: H
  // alternative: proton
  def comp H as
    var H: millimolar {pub: out, init: 2.5E-5};
  enddef;

  // title: Pi
  // alternative: inorganic phosphate
  def comp Pi as
    var Pi: millimolar {pub: out, init: 20.0};
  enddef;

  // title: CoA
  // alternative: Coenzyme A
  def comp CoA as
    var CoA: millimolar {pub: out, init: 0.02};
  enddef;

  // title: AcCoA
  // alternative: acetyl Coenzyme A
  def comp AcCoA as
    var AcCoA: millimolar {pub: out, init: 0.0002};
  enddef;

  // title: FAD
  // alternative: flavin adenine dinucleotide (oxidised)
  def comp FAD as
    var FAD: millimolar {pub: out, init: 0.01};
  enddef;

  // title: FADH2
  // alternative: flavin adenine dinucleotide (reduced)
  def comp FADH2 as
    var FADH2: millimolar {pub: out, init: 1.24};
  enddef;

  // title: NAD
  // alternative: charged nicotinamide adenine dinucleotide
  def comp NAD as
    var NAD: millimolar {pub: out};
    var NADH: millimolar {pub: in};
    var C_PN: millimolar {init: 10.0};
    NAD = C_PN-NADH;
  enddef;

  // title: NADPH
  // alternative: reduced nicotinamide adenine dinucleotide phosphate
  def comp NADPH as
    var NADPH: millimolar {pub: out, init: 1.0};
  enddef;

  // title: O2_m
  // alternative: mitochondrial superoxide radical
  def comp O2_m as
    var O2_m: millimolar {pub: out, init: 0.01};
    var shunt: dimensionless {init: 0.05};
    var V_O2: flux {pub: in};
    var VTr_ROS: flux {pub: in};
    var time: second {pub: in};
    ode(O2_m, time) = shunt*V_O2-VTr_ROS;
  enddef;

  // title: O2_i
  // alternative: cytoplasmic superoxide radical
  def comp O2_i as
    var O2_i: millimolar {pub: out, init: 0.01};
    var V_SOD: flux {pub: in};
    var VTr_ROS: flux {pub: in};
    var time: second {pub: in};
    ode(O2_i, time) = VTr_ROS-V_SOD;
  enddef;

  // title: H2O2
  // alternative: hydrogen peroxide
  def comp H2O2 as
    var H2O2: millimolar {pub: out, init: 0.01};
    var V_SOD: flux {pub: in};
    var V_CAT: flux {pub: in};
    var V_GPX: flux {pub: in};
    var time: second {pub: in};
    ode(H2O2, time) = V_SOD-(V_CAT+V_GPX);
  enddef;

  // title: GSH
  // alternative: glutathione
  def comp GSH as
    var GSH: millimolar {pub: out, init: 0.01};
    var V_GR: flux {pub: in};
    var V_GPX: flux {pub: in};
    var time: second {pub: in};
    ode(GSH, time) = V_GR-V_GPX;
  enddef;

  // title: GSSG
  // alternative: glutathione disulphide
  def comp GSSG as
    var GSSG: millimolar {pub: out};
    var GT: millimolar {init: 1.0};
    var GSH: millimolar {pub: in};
    GSSG = 2.0{dimensionless}*(GT-GSH);
  enddef;

  // title: CIT
  // alternative: citric acid
  def comp CIT as
    var CIT: millimolar {pub: out};
    var ISOC: millimolar {pub: in};
    var alpha_KG: millimolar {pub: in};
    var SCoA: millimolar {pub: in};
    var Suc: millimolar {pub: in};
    var FUM: millimolar {pub: in};
    var MAL: millimolar {pub: in};
    var OAA: millimolar {pub: in};
    var C_Kint: millimolar {init: 1.0};
    CIT = C_Kint-(ISOC+alpha_KG+SCoA+Suc+FUM+MAL+OAA);
  enddef;

  def comp mitochondrial_membrane as
    var delta_psi_m: volt {pub: out, init: 0.01};
    var R: volt_coulomb_per_mole_kelvin {pub: out, init: 8.315};
    var T: kelvin {pub: out, init: 310.16};
    var F: coulomb_per_mole {pub: out, init: 96480};
    var C_mito: millimolar_per_volt {init: 1.812};
    var V_He: flux {pub: in};
    var V_He_F: flux {pub: in};
    var V_Hu: flux {pub: in};
    var V_ANT: flux {pub: in};
    var V_Hleak: flux {pub: in};
    var V_NaCa: flux {pub: in};
    var V_uni: flux {pub: in};
    var time: second {pub: in};
    ode(delta_psi_m, time) = (V_He+V_He_F+(-(V_Hu+V_ANT+V_Hleak+V_NaCa+2.0{dimensionless}*V_uni)))/C_mito;
  enddef;

  def comp V_CS as
    var V_CS: flux {pub: out};
    var OAA: millimolar {pub: in};
    var AcCoA: millimolar {pub: in};
    var Km_AcCoA: millimolar {init: 1.26E-2};
    var Km_OAA: millimolar {init: 6.4E-4};
    var Kcat_CS: first_order_rate_constant {init: 3.2};
    var ET_CS: millimolar {init: 0.4};
    V_CS = Kcat_CS*ET_CS/(1.0{dimensionless}+Km_AcCoA/AcCoA+Km_OAA/OAA+Km_AcCoA/AcCoA*(Km_OAA/OAA));
  enddef;

  def comp V_ACO as
    var V_ACO: flux {pub: out};
    var CIT: millimolar {pub: in};
    var ISOC: millimolar {pub: in};
    var Kf_ACO: first_order_rate_constant {init: 12.5};
    var KE_ACO: dimensionless {init: 2.22};
    V_ACO = Kf_ACO*(CIT-ISOC/KE_ACO);
  enddef;

  def comp V_IDH as
    var V_IDH: flux {pub: out};
    var NAD: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var ADP_m: millimolar {pub: in};
    var Ca_m: micromolar {pub: in};
    var H: millimolar {pub: in};
    var ISOC: millimolar {pub: in};
    var Kh_1: millimolar {init: 8.1E-5};
    var Kh_2: millimolar {init: 5.98E-5};
    var Km_ISOC: millimolar {init: 1.52};
    var Ka_ADP: millimolar {init: 6.2E-2};
    var Ka_Ca: micromolar {init: 1.41};
    var Km_NAD: millimolar {init: 0.923};
    var Ki_NADH: millimolar {init: 0.19};
    var Kcat_IDH: first_order_rate_constant {init: 1.94};
    var ET_IDH: millimolar {init: 0.109};
    var ni: dimensionless {init: 1};
    V_IDH = Kcat_IDH*ET_IDH/(1.0{dimensionless}+H/Kh_1+Kh_2/H+pow(Km_ISOC/ISOC, ni)/((1.0{dimensionless}+ADP_m/Ka_ADP)*(1.0{dimensionless}+Ca_m/Ka_Ca))+Km_NAD/NAD*(1.0{dimensionless}+NADH/Ki_NADH)+pow(Km_ISOC/ISOC, ni)*(Km_NAD/NAD)*(1.0{dimensionless}+NADH/Ki_NADH)/((1.0{dimensionless}+ADP_m/Ka_ADP)*(1.0{dimensionless}+Ca_m/Ka_Ca)));
  enddef;

  def comp V_KGDH as
    var V_KGDH: flux {pub: out};
    var Mg: millimolar {pub: in};
    var Ca_m: micromolar {pub: in};
    var NAD: millimolar {pub: in};
    var alpha_KG: millimolar {pub: in};
    var Km_alpha_KG: millimolar {init: 1.94};
    var Kcat_KGDH: first_order_rate_constant {init: 0.15};
    var ET_KGDH: millimolar {init: 0.5};
    var Kd_Mg: millimolar {init: 0.0308};
    var Kd_Ca: micromolar {init: 1.27};
    var n_alpha_KG: dimensionless {init: 1.2};
    var Km_NAD: millimolar {init: 38.7};
    V_KGDH = Kcat_KGDH*ET_KGDH/(1.0{dimensionless}+pow(Km_alpha_KG/alpha_KG, n_alpha_KG)/((1.0{dimensionless}+Mg/Kd_Mg)*(1.0{dimensionless}+Ca_m/Kd_Ca))+Km_NAD/NAD/((1.0{dimensionless}+Mg/Kd_Mg)*(1.0{dimensionless}+Ca_m/Kd_Ca)));
  enddef;

  def comp V_SL as
    var V_SL: flux {pub: out};
    var SCoA: millimolar {pub: in};
    var ADP_m: millimolar {pub: in};
    var Suc: millimolar {pub: in};
    var ATP_m: millimolar {pub: in};
    var CoA: millimolar {pub: in};
    var kf_SL: second_order_rate_constant {init: 0.127};
    var Ke_SL: millimolar {init: 3.115};
    V_SL = kf_SL*(SCoA*ADP_m-Suc*ATP_m*CoA/Ke_SL);
  enddef;

  def comp V_SDH as
    var V_SDH: flux {pub: out};
    var Suc: millimolar {pub: in};
    var FUM: millimolar {pub: in};
    var OAA: millimolar {pub: in};
    var Kisdh_OAA: millimolar {init: 0.15};
    var Kcat_SDH: first_order_rate_constant {init: 1.0};
    var ET_SDH: millimolar {init: 0.5};
    var Km_Suc: millimolar {init: 3.0E-2};
    var Ki_FUM: millimolar {init: 1.3};
    V_SDH = Kcat_SDH*ET_SDH/(1.0{dimensionless}+Km_Suc/Suc*(1.0{dimensionless}+OAA/Kisdh_OAA)*(1.0{dimensionless}+FUM/Ki_FUM));
  enddef;

  def comp V_MDH as
    var V_MDH: flux {pub: out};
    var MAL: millimolar {pub: in};
    var OAA: millimolar {pub: in};
    var NAD: millimolar {pub: in};
    var H: millimolar {pub: in};
    var Km_MAL: millimolar {init: 1.493};
    var Kcat_MDH: first_order_rate_constant {init: 2.775E1};
    var ET_MDH: millimolar {init: 0.154};
    var Ki_OAA: millimolar {init: 3.1E-3};
    var fh_a: dimensionless;
    var fh_i: dimensionless;
    var Km_NAD: millimolar {init: 0.2244};
    var kh1: millimolar {init: 1.13E-5};
    var kh2: millimolar {init: 26.7};
    var kh3: millimolar {init: 6.68E-9};
    var kh4: millimolar {init: 5.62E-6};
    var k_offset: dimensionless {init: 3.99E-2};
    V_MDH = Kcat_MDH*ET_MDH*fh_a*fh_i/(1.0{dimensionless}+Km_MAL/MAL*(1.0{dimensionless}+OAA/Ki_OAA)+Km_NAD/NAD+Km_MAL/MAL*(1.0{dimensionless}+OAA/Ki_OAA)*(Km_NAD/NAD));
    fh_a = 1.0{dimensionless}/(1.0{dimensionless}+H/kh1+sqr(H)/(kh1*kh2))+k_offset;
    fh_i = sqr(1.0{dimensionless}/(1.0{dimensionless}+kh3/H+kh3*kh4/sqr(H)));
  enddef;

  def comp V_FH as
    var V_FH: flux {pub: out};
    var MAL: millimolar {pub: in};
    var FUM: millimolar {pub: in};
    var Ke_FH: dimensionless {init: 1.0};
    var kf_FH: first_order_rate_constant {init: 0.83};
    V_FH = kf_FH*(FUM-MAL/Ke_FH);
  enddef;

  def comp V_AAT as
    var V_AAT: flux {pub: out};
    var OAA: millimolar {pub: in};
    var GLU: millimolar {pub: in};
    var ASP: millimolar {pub: in};
    var alpha_KG: millimolar {pub: in};
    var Ke_AAT: dimensionless {init: 6.6};
    var kf_AAT: second_order_rate_constant {init: 0.644};
    V_AAT = kf_AAT*(OAA*GLU-alpha_KG*ASP/Ke_AAT);
  enddef;

  def comp V_C_ASP as
    var V_C_ASP: flux {pub: out};
    var ASP: millimolar {pub: in};
    var k_C_ASP: first_order_rate_constant {init: 0.01};
    V_C_ASP = k_C_ASP*ASP;
  enddef;

  // title: V_SOD
  // alternative: superoxide dismutase
  def comp V_SOD as
    var V_SOD: flux {pub: out};
    var k1_SOD: second_order_rate_constant {init: 2.4E6};
    var k3_SOD: second_order_rate_constant {init: 4.8E4};
    var k5_SOD: first_order_rate_constant {init: 5.0E-1};
    var ET_SOD: millimolar {init: 0.4E-3};
    var Ki_H2O2: millimolar {init: 0.5};
    var O2_i: millimolar {pub: in};
    var H2O2: millimolar {pub: in};
    V_SOD = 2.0{dimensionless}*k1_SOD*k5_SOD*(k1_SOD+k3_SOD*(1.0{dimensionless}+H2O2/Ki_H2O2))*ET_SOD*O2_i/(k5_SOD*(2.0{dimensionless}*k1_SOD+k3_SOD*(1.0{dimensionless}+H2O2/Ki_H2O2))+O2_i*k1_SOD*k3_SOD*(1.0{dimensionless}+H2O2/Ki_H2O2));
  enddef;

  // title: V_CAT
  // alternative: Catalase
  def comp V_CAT as
    var V_CAT: flux {pub: out};
    var k1_CAT: second_order_rate_constant {init: 1.7E4};
    var ET_CAT: millimolar {init: 0.001};
    var fr: per_millimolar {init: 50.0};
    var H2O2: millimolar {pub: in};
    V_CAT = 2.0{dimensionless}*k1_CAT*ET_CAT*H2O2*exp(-fr*H2O2);
  enddef;

  // title: V_GPX
  // alternative: Glutathione peroxidase
  def comp V_GPX as
    var V_GPX: flux {pub: out};
    var phi1_GPX: millimolar_second {init: 0.15};
    var phi2_GPX: millimolar_second {init: 0.5};
    var ET_GPX: millimolar {init: 0.00141};
    var H2O2: millimolar {pub: in};
    var GSH: millimolar {pub: in};
    V_GPX = ET_GPX*H2O2*GSH/(phi1_GPX*GSH+phi2_GPX*H2O2);
  enddef;

  // title: V_GR
  // alternative: Glutathione reductase
  def comp V_GR as
    var V_GR: flux {pub: out};
    var k1_GR: first_order_rate_constant {init: 0.0308};
    var KM_GSSG: millimolar {init: 1.94};
    var KM_NADPH: millimolar {init: 38.7};
    var ET_GR: millimolar {init: 1.27E-3};
    var NADPH: millimolar {pub: in};
    var GSSG: millimolar {pub: in};
    V_GR = k1_GR*ET_GR/(1.0{dimensionless}+KM_GSSG/GSSG+KM_NADPH/NADPH+KM_GSSG/GSSG*(KM_NADPH/NADPH));
  enddef;

  // title: V_IMAC
  // alternative: mitochondrial inner membrane anion channel conductance
  def comp V_IMAC as
    var V_IMAC: flux {pub: out};
    var Gmax: millimolar_per_second_volt {init: 7.82};
    var GL: millimolar_per_second_volt {init: 0.0782};
    var a: dimensionless {init: 1.0E-3};
    var b: dimensionless {init: 1.0E4};
    var kappa: per_volt {init: 70.0};
    var delta_psi_bm: volt {init: 0.004};
    var Kcc: millimolar {init: 0.01};
    var delta_psi_m: volt {pub: in};
    var O2_i: millimolar {pub: in};
    var GSSG: millimolar {pub: in};
    V_IMAC = (a+b/(1.0{dimensionless}+Kcc/O2_i))*(GL+Gmax/(1.0{dimensionless}+exp(kappa*(delta_psi_bm-delta_psi_m))))*delta_psi_m;
  enddef;

  // title: VTr_ROS
  // alternative: transport of reactive oxygen species across the inner mitochondrial membrane
  def comp VTr_ROS as
    var VTr_ROS: flux {pub: out};
    var j: dimensionless {init: 0.12};
    var R: volt_coulomb_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var O2_i: millimolar {pub: in};
    var O2_m: millimolar {pub: in};
    var V_IMAC: flux {pub: in};
    var delta_psi_m: volt {pub: in};
    VTr_ROS = j*(V_IMAC/delta_psi_m)*(delta_psi_m-R*T/F*log(O2_m/O2_i));
  enddef;

  def comp oxidative_phosphorylation as
    var V_O2: flux {pub: out};
    var V_He: flux {pub: out};
    var V_He_F: flux {pub: out};
    var V_ATPase: flux {pub: out};
    var V_Hu: flux {pub: out};
    var V_Hleak: flux {pub: out};
    var R: volt_coulomb_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var NAD: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var FAD: millimolar {pub: in};
    var FADH2: millimolar {pub: in};
    var ADP_m: millimolar {pub: in};
    var ATP_m: millimolar {pub: in};
    var Pi: millimolar {pub: in};
    var delta_psi_m: volt {pub: in};
    var rho_res: millimolar {init: 0.0006};
    var rho_res_F: millimolar {init: 0.0045};
    var ra: first_order_rate_constant {init: 6.394E-10};
    var rc1: first_order_rate_constant {init: 2.656E-19};
    var Ares: volt;
    var Ares_F: volt;
    var r1: dimensionless {init: 2.077E-18};
    var r2: dimensionless {init: 1.728E-9};
    var r3: dimensionless {init: 1.059E-26};
    var rb: first_order_rate_constant {init: 1.762E-13};
    var rc2: first_order_rate_constant {init: 8.632E-27};
    var Kres: dimensionless {init: 1.35E18};
    var Kres_F: dimensionless {init: 5.765E13};
    var gH: millimolar_per_second_volt {init: 0.01};
    var delta_psi_B: volt {init: 0.05};
    var g: dimensionless {init: 0.85};
    var delta_mu_H: volt;
    var delta_pH: dimensionless {init: -0.6};
    var rho_F1: millimolar {init: 0.06};
    var pa: first_order_rate_constant {init: 1.656E-5};
    var pc1: first_order_rate_constant {init: 9.651E-14};
    var AF1: volt;
    var p1: dimensionless {init: 1.346E-8};
    var p2: dimensionless {init: 7.739E-7};
    var p3: dimensionless {init: 6.65E-15};
    var pb: first_order_rate_constant {init: 3.373E-7};
    var pc2: first_order_rate_constant {init: 4.585E-14};
    var KF1: millimolar {init: 1.71E6};
    V_O2 = 0.5{dimensionless}*rho_res*(((ra+rc1*exp(6.0{dimensionless}*F*delta_psi_B/(R*T)))*exp(Ares*F/(R*T))-ra*exp(g*6.0{dimensionless}*F*delta_mu_H/(R*T))+rc2*exp(Ares*F/(R*T))*exp(g*6.0{dimensionless}*F*delta_mu_H/(R*T)))/((1.0{dimensionless}+r1*exp(F*Ares/(R*T)))*exp(6.0{dimensionless}*F*delta_psi_B/(R*T))+(r2+r3*exp(F*Ares/(R*T)))*exp(g*6.0{dimensionless}*F*delta_mu_H/(R*T))));
    V_He = 6.0{dimensionless}*rho_res*((ra*exp(F*Ares/(R*T))-(ra+rb)*exp(g*6.0{dimensionless}*F*delta_mu_H/(R*T)))/((1.0{dimensionless}+r1*exp(F*Ares/(R*T)))*exp(6.0{dimensionless}*F*delta_psi_B/(R*T))+(r2+r3*exp(F*Ares/(R*T)))*exp(g*6.0{dimensionless}*F*delta_mu_H/(R*T))));
    Ares = R*T/F*ln(Kres*pow(NADH/NAD, 0.5{dimensionless}));
    V_He_F = 6.0{dimensionless}*rho_res_F*((ra*exp(F*Ares_F/(R*T))-(ra+rb)*exp(g*6.0{dimensionless}*F*delta_mu_H/(R*T)))/((1.0{dimensionless}+r1*exp(F*Ares_F/(R*T)))*exp(6.0{dimensionless}*F*delta_psi_B/(R*T))+(r2+r3*exp(F*Ares_F/(R*T)))*exp(g*6.0{dimensionless}*F*delta_mu_H/(R*T))));
    Ares_F = R*T/F*ln(Kres_F*pow(FADH2/FAD, 0.5{dimensionless}));
    V_Hleak = gH*delta_mu_H;
    delta_mu_H = R*T/F*delta_pH+delta_psi_m;
    V_ATPase = -rho_F1*(((100.0{dimensionless}*pa+pc1*exp(3.0{dimensionless}*F*delta_psi_B/(R*T)))*exp(AF1*F/(R*T))-(pa*exp(3.0{dimensionless}*F*delta_mu_H/(R*T))+pc2*exp(AF1*F/(R*T))*exp(3.0{dimensionless}*F*delta_mu_H/(R*T))))/((1.0{dimensionless}+p1*exp(F*AF1/(R*T)))*exp(3.0{dimensionless}*F*delta_psi_B/(R*T))+(p2+p3*exp(F*AF1/(R*T)))*exp(3.0{dimensionless}*F*delta_mu_H/(R*T))));
    V_Hu = -3.0{dimensionless}*rho_F1*((100.0{dimensionless}*pa*(1.0{dimensionless}+exp(F*AF1/(R*T)))-(pa+pb)*exp(3.0{dimensionless}*F*delta_mu_H/(R*T)))/((1.0{dimensionless}+p1*exp(F*AF1/(R*T)))*exp(3.0{dimensionless}*F*delta_psi_B/(R*T))+(p2+p3*exp(F*AF1/(R*T)))*exp(3.0{dimensionless}*F*delta_mu_H/(R*T))));
    AF1 = R*T/F*ln(KF1*(ATP_m/(ADP_m*Pi)));
  enddef;

  def comp calcium_dynamics as
    var V_ANT: flux {pub: out};
    var V_uni: flux {pub: out};
    var V_NaCa: flux {pub: out};
    var ADP_i: millimolar {pub: in};
    var ATP_i: millimolar {pub: in};
    var ADP_m: millimolar {pub: in};
    var ATP_m: millimolar {pub: in};
    var Ca_i: micromolar {pub: in};
    var Ca_m: micromolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: volt_coulomb_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var delta_psi_m: volt {pub: in};
    var h: dimensionless {init: 0.5};
    var delta_psi_0: volt {init: 0.091};
    var Vmax_ANT: flux {init: 0.05};
    var L: dimensionless {init: 110.0};
    var na: dimensionless {init: 2.8};
    var Vmax_uni: flux {init: 0.000625};
    var K_act: micromolar {init: 0.38};
    var K_trans: micromolar {init: 19.0};
    var n: dimensionless {init: 3.0};
    var Vmax_NaCa: flux {init: 0.005};
    var KNa: millimolar {init: 9.4};
    var KCa: micromolar {init: 3.75E-1};
    var b: dimensionless {init: 0.5};
    V_ANT = Vmax_ANT*((1.0{dimensionless}-0.05{dimensionless}*ATP_i*0.45{dimensionless}*0.8{dimensionless}*ADP_m/(0.45{dimensionless}*ADP_i*0.05{dimensionless}*ATP_m))/((1.0{dimensionless}+0.05{dimensionless}*ATP_i/(0.45{dimensionless}*ADP_i)*exp(-h*F*delta_psi_0/(R*T)))*(1.0{dimensionless}+0.45{dimensionless}*0.8{dimensionless}*ADP_m/(0.05{dimensionless}*ATP_m))));
    V_uni = Vmax_uni*(Ca_i/K_trans*pow(1.0{dimensionless}+Ca_i/K_trans, 3.0{dimensionless})*(2.0{dimensionless}*F*(delta_psi_m-delta_psi_0)/(R*T))/(pow(1.0{dimensionless}+Ca_i/K_trans, 4.0{dimensionless})+L/pow(1.0{dimensionless}+Ca_i/K_act, na)*(1.0{dimensionless}-exp(-2.0{dimensionless}*F*(delta_psi_m-delta_psi_0)/(R*T)))));
    V_NaCa = Vmax_NaCa*(exp(b*F*(delta_psi_m-delta_psi_0)/(R*T))*exp(ln(Ca_i/Ca_m))/(pow(1.0{dimensionless}+KNa/Na_i, n)*(1.0{dimensionless}+KCa/Ca_m)));
  enddef;
  def map between ADP_m and oxidative_phosphorylation for
    vars ADP_m and ADP_m;
    vars V_ATPase and V_ATPase;
  enddef;
  def map between ADP_m and calcium_dynamics for
    vars ADP_m and ADP_m;
    vars V_ANT and V_ANT;
  enddef;
  def map between ADP_m and V_SL for
    vars ADP_m and ADP_m;
    vars V_SL and V_SL;
  enddef;
  def map between NADH and oxidative_phosphorylation for
    vars NADH and NADH;
    vars V_O2 and V_O2;
  enddef;
  def map between NADH and V_IDH for
    vars NADH and NADH;
    vars V_IDH and V_IDH;
  enddef;
  def map between NADH and V_KGDH for
    vars V_KGDH and V_KGDH;
  enddef;
  def map between NADH and V_MDH for
    vars V_MDH and V_MDH;
  enddef;
  def map between ISOC and V_ACO for
    vars ISOC and ISOC;
    vars V_ACO and V_ACO;
  enddef;
  def map between ISOC and V_IDH for
    vars ISOC and ISOC;
    vars V_IDH and V_IDH;
  enddef;
  def map between alpha_KG and V_IDH for
    vars V_IDH and V_IDH;
  enddef;
  def map between alpha_KG and V_KGDH for
    vars alpha_KG and alpha_KG;
    vars V_KGDH and V_KGDH;
  enddef;
  def map between alpha_KG and V_AAT for
    vars alpha_KG and alpha_KG;
    vars V_AAT and V_AAT;
  enddef;
  def map between SCoA and V_KGDH for
    vars V_KGDH and V_KGDH;
  enddef;
  def map between SCoA and V_SL for
    vars SCoA and SCoA;
    vars V_SL and V_SL;
  enddef;
  def map between Suc and V_SL for
    vars Suc and Suc;
    vars V_SL and V_SL;
  enddef;
  def map between Suc and V_SDH for
    vars Suc and Suc;
    vars V_SDH and V_SDH;
  enddef;
  def map between FUM and V_SDH for
    vars FUM and FUM;
    vars V_SDH and V_SDH;
  enddef;
  def map between FUM and V_FH for
    vars FUM and FUM;
    vars V_FH and V_FH;
  enddef;
  def map between MAL and V_FH for
    vars MAL and MAL;
    vars V_FH and V_FH;
  enddef;
  def map between MAL and V_MDH for
    vars MAL and MAL;
    vars V_MDH and V_MDH;
  enddef;
  def map between OAA and V_MDH for
    vars OAA and OAA;
    vars V_MDH and V_MDH;
  enddef;
  def map between OAA and V_CS for
    vars OAA and OAA;
    vars V_CS and V_CS;
  enddef;
  def map between OAA and V_AAT for
    vars OAA and OAA;
    vars V_AAT and V_AAT;
  enddef;
  def map between ASP and V_AAT for
    vars ASP and ASP;
    vars V_AAT and V_AAT;
  enddef;
  def map between ASP and V_C_ASP for
    vars ASP and ASP;
    vars V_C_ASP and V_C_ASP;
  enddef;
  def map between Ca_m and calcium_dynamics for
    vars Ca_m and Ca_m;
    vars V_uni and V_uni;
    vars V_NaCa and V_NaCa;
  enddef;
  def map between AcCoA and V_CS for
    vars AcCoA and AcCoA;
  enddef;
  def map between CIT and V_ACO for
    vars CIT and CIT;
  enddef;
  def map between NAD and V_IDH for
    vars NAD and NAD;
  enddef;
  def map between H and V_IDH for
    vars H and H;
  enddef;
  def map between NAD and V_KGDH for
    vars NAD and NAD;
  enddef;
  def map between Mg and V_KGDH for
    vars Mg and Mg;
  enddef;
  def map between CoA and V_SL for
    vars CoA and CoA;
  enddef;
  def map between ATP_m and V_SL for
    vars ATP_m and ATP_m;
  enddef;
  def map between NAD and V_MDH for
    vars NAD and NAD;
  enddef;
  def map between H and V_MDH for
    vars H and H;
  enddef;
  def map between GLU and V_AAT for
    vars GLU and GLU;
  enddef;
  def map between NAD and oxidative_phosphorylation for
    vars NAD and NAD;
  enddef;
  def map between Pi and oxidative_phosphorylation for
    vars Pi and Pi;
  enddef;
  def map between FAD and oxidative_phosphorylation for
    vars FAD and FAD;
  enddef;
  def map between FADH2 and oxidative_phosphorylation for
    vars FADH2 and FADH2;
  enddef;
  def map between ATP_m and oxidative_phosphorylation for
    vars ATP_m and ATP_m;
  enddef;
  def map between ATP_i and calcium_dynamics for
    vars ATP_i and ATP_i;
  enddef;
  def map between ADP_i and calcium_dynamics for
    vars ADP_i and ADP_i;
  enddef;
  def map between ATP_m and calcium_dynamics for
    vars ATP_m and ATP_m;
  enddef;
  def map between Ca_i and calcium_dynamics for
    vars Ca_i and Ca_i;
  enddef;
  def map between Na_i and calcium_dynamics for
    vars Na_i and Na_i;
  enddef;
  def map between oxidative_phosphorylation and mitochondrial_membrane for
    vars R and R;
    vars T and T;
    vars F and F;
    vars delta_psi_m and delta_psi_m;
    vars V_He and V_He;
    vars V_He_F and V_He_F;
    vars V_Hu and V_Hu;
    vars V_Hleak and V_Hleak;
  enddef;
  def map between calcium_dynamics and mitochondrial_membrane for
    vars R and R;
    vars T and T;
    vars F and F;
    vars delta_psi_m and delta_psi_m;
    vars V_NaCa and V_NaCa;
    vars V_uni and V_uni;
    vars V_ANT and V_ANT;
  enddef;
  def map between ADP_m and V_IDH for
    vars ADP_m and ADP_m;
  enddef;
  def map between Ca_m and V_IDH for
    vars Ca_m and Ca_m;
  enddef;
  def map between Ca_m and V_KGDH for
    vars Ca_m and Ca_m;
  enddef;
  def map between OAA and V_SDH for
    vars OAA and OAA;
  enddef;
  def map between ADP_m and ATP_m for
    vars ADP_m and ADP_m;
  enddef;
  def map between NAD and NADH for
    vars NADH and NADH;
  enddef;
  def map between CIT and ISOC for
    vars ISOC and ISOC;
  enddef;
  def map between CIT and alpha_KG for
    vars alpha_KG and alpha_KG;
  enddef;
  def map between CIT and SCoA for
    vars SCoA and SCoA;
  enddef;
  def map between CIT and Suc for
    vars Suc and Suc;
  enddef;
  def map between CIT and FUM for
    vars FUM and FUM;
  enddef;
  def map between CIT and MAL for
    vars MAL and MAL;
  enddef;
  def map between CIT and OAA for
    vars OAA and OAA;
  enddef;
  def map between ADP_m and environment for
    vars time and time;
  enddef;
  def map between Ca_i and environment for
    vars time and time;
  enddef;
  def map between ADP_i and environment for
    vars time and time;
  enddef;
  def map between NADH and environment for
    vars time and time;
  enddef;
  def map between mitochondrial_membrane and environment for
    vars time and time;
  enddef;
  def map between ISOC and environment for
    vars time and time;
  enddef;
  def map between alpha_KG and environment for
    vars time and time;
  enddef;
  def map between SCoA and environment for
    vars time and time;
  enddef;
  def map between Suc and environment for
    vars time and time;
  enddef;
  def map between FUM and environment for
    vars time and time;
  enddef;
  def map between MAL and environment for
    vars time and time;
  enddef;
  def map between OAA and environment for
    vars time and time;
  enddef;
  def map between ASP and environment for
    vars time and time;
  enddef;
  def map between Ca_m and environment for
    vars time and time;
  enddef;
  def map between O2_m and environment for
    vars time and time;
  enddef;
  def map between O2_i and environment for
    vars time and time;
  enddef;
  def map between H2O2 and environment for
    vars time and time;
  enddef;
  def map between GSH and environment for
    vars time and time;
  enddef;
  def map between V_SOD and H2O2 for
    vars H2O2 and H2O2;
    vars V_SOD and V_SOD;
  enddef;
  def map between V_SOD and O2_i for
    vars O2_i and O2_i;
    vars V_SOD and V_SOD;
  enddef;
  def map between V_CAT and H2O2 for
    vars H2O2 and H2O2;
    vars V_CAT and V_CAT;
  enddef;
  def map between V_GPX and H2O2 for
    vars H2O2 and H2O2;
    vars V_GPX and V_GPX;
  enddef;
  def map between V_GPX and GSH for
    vars GSH and GSH;
    vars V_GPX and V_GPX;
  enddef;
  def map between V_GR and GSH for
    vars V_GR and V_GR;
  enddef;
  def map between NADPH and V_GR for
    vars NADPH and NADPH;
  enddef;
  def map between V_GR and GSSG for
    vars GSSG and GSSG;
  enddef;
  def map between V_IMAC and O2_i for
    vars O2_i and O2_i;
  enddef;
  def map between V_IMAC and GSSG for
    vars GSSG and GSSG;
  enddef;
  def map between VTr_ROS and O2_i for
    vars O2_i and O2_i;
    vars VTr_ROS and VTr_ROS;
  enddef;
  def map between VTr_ROS and V_IMAC for
    vars V_IMAC and V_IMAC;
  enddef;
  def map between VTr_ROS and O2_m for
    vars O2_m and O2_m;
    vars VTr_ROS and VTr_ROS;
  enddef;
  def map between oxidative_phosphorylation and O2_m for
    vars V_O2 and V_O2;
  enddef;
  def map between VTr_ROS and mitochondrial_membrane for
    vars R and R;
    vars F and F;
    vars T and T;
    vars delta_psi_m and delta_psi_m;
  enddef;
  def map between V_IMAC and mitochondrial_membrane for
    vars delta_psi_m and delta_psi_m;
  enddef;
  def map between GSH and GSSG for
    vars GSH and GSH;
  enddef;
enddef;
