// creator: Family Lloyd; Given Catherine; Other May; c.lloyd@auckland.ac.nz; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2010-05-28
// bio_entity: rumen
// reference: subject_type keyword; metabolism; digestion
// reference: Pubmed_id 1331382; Family Dijkstra; Given J; Family Neal; Given H; Other D; Family Beever; Given D; Other E; Family France; Given J; title Simulation of nutrient digestion, absorption and outflow in the rumen: model description; W3CDTF 1992-11; title The Journal of Nutrition; volume 122; first_page 2239; last_page 2256
def model dijkstra_1992 as
  // Simulation of nutrient digestion, absorption and outflow in the rumen: model description
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both OpenCell and COR. The units have been checked and they are consistent. In order to balance the units in a couple of equations a "balancing factor" had to be introduced (eqs 4.13 and 14.36). Also note there are two typographical errors in the published paper: eq 1.1 should be C_Pd = Q_Pd/V_Ru (not C_Pd = Q_Pd*V_Ru) and eq 8.2 P_Fu_InFu = Y_Fu_InFu*D_Fu (not P_Fu_InFu = U_Fu_InFu*D_Fu). Finally there are quite a few variables with undefined values. To complete the CellML model, where parameter values were missing, a value of 1.000 has been used. Note that there are some genuine values of 1. These have been entered as just 1 or 1.0. The model simulation output looks reasonable, but with no results figures in the published paper it is hard to say whether or not the CellML model accurately recreates the published results.
  //
  // Model Structure
  //
  // ABSTRACT: A mathematical model is described that stimulates the digestion, absorption and outflow of nutrients in the rumen. The model consists of 17 state variables, representing nitrogen, carbohydrate, lipid, microbial and volatile fatty acid pools. The flux equations are described by Michaelis-Menten or mass action forms with model_parameters calculated from the literature. Several specific areas of improvement in representation of rumen processes were reconsidered during model development. These included microbial substrate preference, differential outflow and chemical composition of rumen microbes, recycling of microbial matter within the rumen, uncoupling of fermentation with respect to nitrogen availability, reduced microbial activity at reduced rumen pH and pH-dependent absorption of volatile fatty acids and ammonia. The model was used to examine the effects of the diet on the profile of nutrients available for absorption and was shown to respond appropriately to different intake and nitrogen levels. The validity of the improvements and the predictions of nutrient supply on a variety of dietary inputs are tested in a companion paper.
  //
  // The original paper reference is cited below:
  //
  // Simulation of nutrient digestion, absorption and outflow in the rumen: model description, Dijkstra J, Neal HD, Beever DE, and France J, 1992, The Journal of Nutrition, 122, 2239-2256. PubMed ID: 1331382 (http://www.ncbi.nlm.nih.gov/pubmed/1331382)
  //
  // Diagrammatic representation of the rumen model. Purple boxes indicate state variables and arrows indicate fluxes.
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit gram_per_litre as
    unit gram;
    unit litre {expo: -1};
  enddef;
  def unit day as
    unit second {mult: 86400.0};
  enddef;
  def unit mole_per_day as
    unit mole;
    unit day {expo: -1};
  enddef;
  def unit mole_per_litre_day as
    unit mole;
    unit litre {expo: -1};
    unit day {expo: -1};
  enddef;
  def unit gram_per_day as
    unit gram;
    unit day {expo: -1};
  enddef;
  def unit gram_per_mole as
    unit gram;
    unit mole {expo: -1};
  enddef;
  def unit mole_per_gram_day as
    unit mole;
    unit gram {expo: -1};
    unit day {expo: -1};
  enddef;
  def unit mole_per_gram as
    unit mole;
    unit gram {expo: -1};
  enddef;
  def unit gram_per_litre_day as
    unit gram;
    unit litre {expo: -1};
    unit day {expo: -1};
  enddef;
  def unit litre_per_day as
    unit litre;
    unit day {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit day {expo: -1};
  enddef;

  def comp environment as
    var time: day {pub: out};
  enddef;

  // title: Q_Pd
  // alternative: degradable protein pool
  def comp Q_Pd as
    var U_Pd_PdPs: mole_per_day {pub: out};
    var Q_Pd: mole {init: 1.000};
    var C_Pd: molar;
    var U_Pd_PdEx: mole_per_day;
    var P_Pd_InPd: mole_per_day;
    var v_PdPs: mole_per_day;
    var v_PdPs_star: mole_per_gram_day {init: 0.0576};
    var M_Pd_PdPs: molar;
    var M_Pd_PdPs_star: molar {init: 0.264};
    var Y_Pd_InPd: molar {init: 0.0091};
    var D_Pd: litre_per_day {init: 1.000};
    var k_PdEx: first_order_rate_constant;
    var T_Pd: day {init: 1.000};
    var T_Pd_star: day {init: 0.66};
    var time: day {pub: in};
    var Q_Ma: gram {pub: in};
    var Q_Mc: gram {pub: in};
    var V_Ru: litre {pub: in};
    var k_SoEx: first_order_rate_constant {pub: in};
    C_Pd = Q_Pd/V_Ru;
    P_Pd_InPd = Y_Pd_InPd*D_Pd;
    U_Pd_PdPs = v_PdPs/(1{dimensionless}+M_Pd_PdPs/C_Pd);
    U_Pd_PdEx = k_PdEx*Q_Pd;
    ode(Q_Pd, time) = P_Pd_InPd-(U_Pd_PdPs+U_Pd_PdEx);
    k_PdEx = k_SoEx;
    M_Pd_PdPs = M_Pd_PdPs_star*(T_Pd/T_Pd_star);
    v_PdPs = v_PdPs_star*(Q_Ma+Q_Mc);
  enddef;

  // title: Q_Ps
  // alternative: soluble protein pool
  def comp Q_Ps as
    var C_Ps: molar {pub: out};
    var U_McPs_PsAm: mole_per_day {pub: out};
    var U_Ps_PsMa: mole_per_day {pub: out};
    var U_Ps_PsMc: mole_per_day {pub: out};
    var U_MaPs_PsAm: mole_per_day {pub: out};
    var M_Ha_McMa: molar {pub: out, init: 0.0248};
    var Q_Ps: mole {init: 1.000};
    var P_Ps_InPs: mole_per_day;
    var P_Ps_SaPs: mole_per_day;
    var P_Ps_PdPs: mole_per_day;
    var P_Ps_MaMd: mole_per_day;
    var P_Ps_McPs: mole_per_day;
    var U_Ps_PsEx: mole_per_day;
    var U_Mc_McPs: mole_per_day;
    var v_Ma_PsAm: mole_per_day;
    var v_Mc_PsAm: mole_per_day;
    var v_PsMa: mole_per_day;
    var v_PsMc: mole_per_day;
    var v_PsAm_star: mole_per_gram_day {init: 0.0144};
    var v_PsMa_star: mole_per_gram_day {init: 0.0576};
    var v_PsMc_star: mole_per_gram_day {init: 0.0576};
    var k_PsEx: first_order_rate_constant;
    var Y_Ps_InPs: molar {init: 0.0091};
    var Y_Ps_SaPs: molar {init: 0.0010};
    var Y_Ps_PdPs: dimensionless {init: 1.0};
    var Y_Ps_MaMd: mole_per_gram {init: 0.0067};
    var Y_Ps_McPs: dimensionless {init: 0.0067};
    var D_Ps: litre_per_day {init: 1.000};
    var M_Ps_PsAm: molar {init: 0.0289};
    var M_Ps_PsMa: molar {init: 0.0224};
    var M_Ps_PsMc: molar {init: 0.0224};
    var M_Ha_PsMa: molar {init: 0.0248};
    var M_Hc_PsMc: molar {init: 0.0248};
    var J_Ha_PsAm: molar {init: 0.0165};
    var J_Hc_PsAm: molar {init: 0.0165};
    var time: day {pub: in};
    var Q_Ma: gram {pub: in};
    var Q_Mc: gram {pub: in};
    var V_Ru: litre {pub: in};
    var U_Pd_PdPs: mole_per_day {pub: in};
    var U_Mc_McEg: gram_per_day {pub: in};
    var U_Ma_MaMd: gram_per_day {pub: in};
    var U_Hc_PsMc: mole_per_day {pub: in};
    var U_Ha_McMa: mole_per_day {pub: in};
    var C_Ha: molar {pub: in};
    var C_Hc: molar {pub: in};
    var k_FlEx: first_order_rate_constant {pub: in};
    var J_Ha_McAm: molar {pub: in};
    C_Ps = Q_Ps/V_Ru;
    P_Ps_InPs = Y_Ps_InPs*D_Ps;
    P_Ps_SaPs = Y_Ps_SaPs*D_Ps;
    P_Ps_PdPs = Y_Ps_PdPs*U_Pd_PdPs;
    P_Ps_MaMd = Y_Ps_MaMd*U_Ma_MaMd;
    P_Ps_McPs = Y_Ps_McPs*U_Mc_McPs;
    U_MaPs_PsAm = v_Ma_PsAm/(1{dimensionless}+M_Ps_PsAm/C_Ps+C_Ha/J_Ha_PsAm);
    U_McPs_PsAm = v_Mc_PsAm/(1{dimensionless}+M_Ps_PsAm/C_Ps+C_Hc/J_Hc_PsAm);
    U_Ps_PsMa = v_PsMa/(1{dimensionless}+M_Ps_PsMa/C_Ps+M_Ha_PsMa/C_Ha);
    U_Ps_PsMc = v_PsMc/(1{dimensionless}+M_Ps_PsMc/C_Ps+M_Hc_PsMc/C_Hc);
    U_Ps_PsEx = k_PsEx*Q_Ps;
    ode(Q_Ps, time) = P_Ps_InPs+P_Ps_PdPs+P_Ps_MaMd+P_Ps_SaPs+P_Ps_McPs-(U_MaPs_PsAm+U_McPs_PsAm+U_Ps_PsMa+U_Ps_PsMc+U_Ps_PsEx);
    U_Mc_McPs = U_Mc_McEg*(1{mole_per_gram}-(1{mole_per_gram}/(1{dimensionless}+C_Ha/J_Ha_McAm)+1{mole_per_gram}/(1{dimensionless}+M_Ha_McMa/C_Ha)));
    v_Ma_PsAm = v_PsAm_star*Q_Ma;
    v_Mc_PsAm = v_PsAm_star*Q_Mc;
    v_PsMa = v_PsMa_star*Q_Ma;
    v_PsMc = v_PsMc_star*Q_Mc;
    k_PsEx = k_FlEx;
  enddef;

  // title: Q_Pu
  // alternative: undegradable protein pool
  def comp Q_Pu as
    var Q_Pu: mole {init: 1.000};
    var C_Pu: molar;
    var P_Pu_InPu: mole_per_day;
    var U_Pu_PuEx: mole_per_day;
    var Y_Pu_InPu: molar {init: 0.0091};
    var D_Pu: litre_per_day {init: 1.000};
    var k_PuEx: first_order_rate_constant;
    var time: day {pub: in};
    var V_Ru: litre {pub: in};
    var k_SoEx: first_order_rate_constant {pub: in};
    C_Pu = Q_Pu/V_Ru;
    P_Pu_InPu = Y_Pu_InPu*D_Pu;
    U_Pu_PuEx = k_PuEx*Q_Pu;
    ode(Q_Pu, time) = P_Pu_InPu-U_Pu_PuEx;
    k_PuEx = k_SoEx;
  enddef;

  // title: Q_Am
  // alternative: ammonia pool
  def comp Q_Am as
    var C_Am: molar {pub: out};
    var U_Am_AmMc: mole_per_day {pub: out};
    var U_Am_AmMa: mole_per_day {pub: out};
    var U_Mc_McAm: mole_per_day {pub: out};
    var Q_Am: mole {init: 1.000};
    var P_Am_InAm: mole_per_day;
    var P_Am_UeAm: mole_per_day;
    var P_MaAm_PsAm: mole_per_day;
    var P_McAm_PsAm: mole_per_day;
    var P_Am_McAm: mole_per_day;
    var U_Am_AmAb: mole_per_day;
    var U_Am_AmEx: mole_per_day;
    var v_UeAm: mole_per_day;
    var v_AmAb: mole_per_day;
    var v_AmMa: mole_per_day;
    var v_AmMc: mole_per_day;
    var v_UeAm_star: mole_per_litre_day {init: 0.00165};
    var v_AmAb_star: mole_per_litre_day {init: 1.10};
    var v_AmMa_star: mole_per_gram_day {init: 0.0528};
    var v_AmMc_star: mole_per_gram_day {init: 0.0528};
    var k_AmEx: first_order_rate_constant;
    var Y_Am_InAm: molar {init: 0.0588};
    var Y_Am_UeAm: dimensionless {init: 2.0};
    var Y_Am_PsAm: dimensionless {init: 1.257};
    var Y_Am_McAm: dimensionless {init: 0.0084};
    var M_Am_AmMa: molar {init: 0.00135};
    var M_Am_AmMc: molar {init: 0.00135};
    var M_Am_AmAb: molar {init: 0.0132};
    var M_pH_AmAb: dimensionless {init: 7.5};
    var phi_pH_AmAb: dimensionless {init: 7.85};
    var M_Ha_AmMa: molar {init: 0.0159};
    var M_Hc_AmMc: molar {init: 0.0159};
    var J_Am_UeAm: molar {init: 0.00621};
    var D_Am: litre_per_day {init: 1.000};
    var time: day {pub: in};
    var Q_Ma: gram {pub: in};
    var Q_Mc: gram {pub: in};
    var V_Ru: litre {pub: in};
    var pH: dimensionless {pub: in};
    var f_Po_Ma: dimensionless {pub: in};
    var f_Ni_Fe: dimensionless {pub: in};
    var U_McPs_PsAm: mole_per_day {pub: in};
    var U_MaPs_PsAm: mole_per_day {pub: in};
    var U_Mc_McEg: gram_per_day {pub: in};
    var C_Ha: molar {pub: in};
    var C_Hc: molar {pub: in};
    var J_Ha_McAm: molar {pub: in};
    var k_FlEx: first_order_rate_constant {pub: in};
    C_Am = Q_Am/V_Ru;
    P_Am_InAm = Y_Am_InAm*D_Am;
    P_Am_UeAm = Y_Am_UeAm*v_UeAm;
    P_MaAm_PsAm = Y_Am_PsAm*U_MaPs_PsAm;
    P_McAm_PsAm = Y_Am_PsAm*U_McPs_PsAm;
    P_Am_McAm = Y_Am_McAm*U_Mc_McAm;
    U_Am_AmMa = v_AmMa/(1{dimensionless}+M_Am_AmMa/C_Am+M_Ha_AmMa/C_Ha);
    U_Am_AmMc = v_AmMc/(1{dimensionless}+M_Am_AmMc/C_Am+M_Hc_AmMc/C_Hc);
    U_Am_AmAb = v_AmAb/(1{dimensionless}+M_Am_AmAb/C_Am);
    U_Am_AmEx = k_AmEx*Q_Am;
    ode(Q_Am, time) = P_Am_InAm+P_MaAm_PsAm+P_McAm_PsAm+P_Am_UeAm+P_Am_McAm-(U_Am_AmAb+U_Am_AmMa+U_Am_AmMc+U_Am_AmEx);
    v_UeAm = v_UeAm_star*V_Ru*(f_Ni_Fe/(1{dimensionless}+C_Am/J_Am_UeAm));
    v_AmAb = v_AmAb_star*pow(1.0{litre}, 0.25{dimensionless})*pow(V_Ru, 0.75{dimensionless})*(1{dimensionless}+pow(M_pH_AmAb/pH, phi_pH_AmAb));
    v_AmMa = v_AmMa_star*Q_Ma*(1{dimensionless}-f_Po_Ma);
    v_AmMc = v_AmMc_star*Q_Mc;
    U_Mc_McAm = 1{mole_per_gram}*U_Mc_McEg/(1{dimensionless}+C_Ha/J_Ha_McAm);
    k_AmEx = k_FlEx;
  enddef;

  // title: Q_Li
  // alternative: lipid pool
  def comp Q_Li as
    var Q_Li: mole {init: 1.000};
    var C_Li: molar;
    var P_Li_InLi: mole_per_day;
    var P_Li_MaMd: mole_per_day;
    var U_Li_LiEx: mole_per_day;
    var Y_Li_InLi: molar {init: 0.0015};
    var Y_Li_MaMd: mole_per_gram {init: 0.00021};
    var D_Li: litre_per_day {init: 1.000};
    var k_LiEx: first_order_rate_constant;
    var time: day {pub: in};
    var V_Ru: litre {pub: in};
    var k_FlEx: first_order_rate_constant {pub: in};
    var U_Ma_MaMd: gram_per_day {pub: in};
    C_Li = Q_Li/V_Ru;
    P_Li_InLi = Y_Li_InLi*D_Li;
    P_Li_MaMd = Y_Li_MaMd*U_Ma_MaMd;
    U_Li_LiEx = k_LiEx*Q_Li;
    ode(Q_Li, time) = P_Li_InLi+P_Li_MaMd-U_Li_LiEx;
    k_LiEx = k_FlEx;
  enddef;

  // title: Q_Sd
  // alternative: degradable starch pool
  def comp Q_Sd as
    var U_Sd_SdHa: mole_per_day {pub: out};
    var Q_Sd: mole {init: 1.000};
    var C_Sd: molar;
    var P_Sd_InSd: mole_per_day;
    var U_Sd_SdEx: mole_per_day;
    var Y_Sd_InSd: molar {init: 0.0062};
    var D_Sd: litre_per_day {init: 1.000};
    var k_SdEx: first_order_rate_constant;
    var v_SdHa: mole_per_day;
    var v_SdHa_star: mole_per_gram_day {init: 0.2179};
    var M_Sd_SdHa: molar;
    var M_Sd_SdHa_star: molar {init: 0.416};
    var T_Sd: day {init: 1.000};
    var T_Sd_star: day {init: 1.04};
    var time: day {pub: in};
    var V_Ru: litre {pub: in};
    var Q_Ma: gram {pub: in};
    var k_SoEx: first_order_rate_constant {pub: in};
    C_Sd = Q_Sd/V_Ru;
    P_Sd_InSd = Y_Sd_InSd*D_Sd;
    U_Sd_SdHa = v_SdHa/(1{dimensionless}+M_Sd_SdHa/C_Sd);
    U_Sd_SdEx = k_SdEx*Q_Sd;
    ode(Q_Sd, time) = P_Sd_InSd-(U_Sd_SdHa+U_Sd_SdEx);
    v_SdHa = v_SdHa_star*Q_Ma;
    M_Sd_SdHa = M_Sd_SdHa_star*(T_Sd/T_Sd_star);
    k_SdEx = k_SoEx;
  enddef;

  // title: Q_Fd
  // alternative: degradable fiber pool
  def comp Q_Fd as
    var U_Fd_FdHc: mole_per_day {pub: out};
    var Q_Fd: mole {init: 1.000};
    var C_Fd: molar;
    var P_Fd_InFd: mole_per_day;
    var U_Fd_FdEx: mole_per_day;
    var Y_Fd_InFd: molar {init: 0.0062};
    var D_Fd: litre_per_day {init: 1.000};
    var k_FdEx: first_order_rate_constant;
    var v_FdHc: mole_per_day;
    var v_FdHc_star: mole_per_gram_day {init: 0.1646};
    var M_Fd_FdHc: molar;
    var M_Fd_FdHc_star: molar {init: 0.332};
    var T_Fd: day {init: 1.000};
    var T_Fd_star: day {init: 0.83};
    var phi_pH_FdHc: dimensionless {init: 22.9};
    var M_pH_FdHc: dimensionless {init: 5.97};
    var pm: dimensionless {pub: in};
    var f: dimensionless {pub: in};
    var time: day {pub: in};
    var V_Ru: litre {pub: in};
    var Q_Mc: gram {pub: in};
    var k_SoEx: first_order_rate_constant {pub: in};
    C_Fd = Q_Fd/V_Ru;
    P_Fd_InFd = Y_Fd_InFd*D_Fd;
    U_Fd_FdHc = v_FdHc/(1{dimensionless}+M_Fd_FdHc/C_Fd);
    U_Fd_FdEx = k_FdEx*Q_Fd;
    ode(Q_Fd, time) = P_Fd_InFd-(U_Fd_FdHc+U_Fd_FdEx);
    v_FdHc = v_FdHc_star*Q_Mc*(1{dimensionless}-time*f/1.0{day}+time*f/1.0{day}/(1{dimensionless}+pow(M_pH_FdHc/pm, phi_pH_FdHc)));
    M_Fd_FdHc = M_Fd_FdHc_star*(T_Fd/T_Fd_star);
    k_FdEx = k_SoEx;
  enddef;

  // title: Q_Fu
  // alternative: undegradable fiber pool
  def comp Q_Fu as
    var Q_Fu: mole {init: 1.000};
    var C_Fu: molar;
    var P_Fu_InFu: mole_per_day;
    var U_Fu_FuEx: mole_per_day;
    var Y_Fu_InFu: molar {init: 0.0062};
    var D_Fu: litre_per_day {init: 1.000};
    var k_FuEx: first_order_rate_constant;
    var time: day {pub: in};
    var V_Ru: litre {pub: in};
    var k_SoEx: first_order_rate_constant {pub: in};
    C_Fu = Q_Fu/V_Ru;
    P_Fu_InFu = Y_Fu_InFu*D_Fu;
    U_Fu_FuEx = k_FuEx*Q_Fu;
    ode(Q_Fu, time) = P_Fu_InFu-U_Fu_FuEx;
    k_FuEx = k_SoEx;
  enddef;

  // title: Q_Ha
  // alternative: hexose availability to amylolytic microbes
  def comp Q_Ha as
    var C_Ha: molar {pub: out};
    var U_Ha_HaAs: mole_per_day {pub: out};
    var U_Ha_AmMa: mole_per_day {pub: out};
    var U_Ha_PsMa: mole_per_day {pub: out};
    var U_Ha_McMa: mole_per_day {pub: out};
    var U_Ha_HaVa: mole_per_day {pub: out};
    var P_Ha_WrHa: mole_per_day {pub: out};
    var P_Ha_LaHa: mole_per_day {pub: out};
    var P_Ha_SrHa: mole_per_day {pub: out};
    var P_Ha_SdHa: mole_per_day {pub: out};
    var P_Ha_MaMd: mole_per_day {pub: out};
    var Q_Ha: mole {init: 1.000};
    var U_Ha_HaEx: mole_per_day;
    var R_Ha_AmMa: dimensionless {init: 1.793};
    var R_Ha_PsMa: dimensionless {init: 1.291};
    var R_Ha_McMa: mole_per_gram {init: 0.0086};
    var M_Ha_HaAs: molar {init: 0.0268};
    var M_Ha_HaVa: molar {init: 0.055};
    var v_HaAs: mole_per_day;
    var v_HaVa: mole_per_day;
    var v_HaAs_star: mole_per_gram_day {init: 0.053};
    var v_HaVa_star: mole_per_gram_day {init: 0.1646};
    var k_HaEx: first_order_rate_constant;
    var Y_Ha_WrHa: molar {init: 0.0062};
    var Y_Ha_SrHa: molar {init: 0.0062};
    var Y_Ha_LaHa: molar {init: 0.0025};
    var Y_Ha_SdHa: dimensionless {init: 1.0};
    var Y_Ha_MaMd: mole_per_gram {init: 0.0062};
    var D_Wr: litre_per_day {init: 1.000};
    var D_Sr: litre_per_day {init: 1.000};
    var D_La: litre_per_day {init: 1.000};
    var J_Am_HaVa: molar {init: 0.00861};
    var J_Ps_HaVa: molar {init: 0.01465};
    var time: day {pub: in};
    var Q_Ma: gram {pub: in};
    var V_Ru: litre {pub: in};
    var f_Po_Ma: dimensionless {pub: in};
    var U_Sd_SdHa: mole_per_day {pub: in};
    var U_As_MaMd: gram_per_day {pub: in};
    var U_Am_AmMa: mole_per_day {pub: in};
    var U_Ps_PsMa: mole_per_day {pub: in};
    var U_Mc_McMa: gram_per_day {pub: in};
    var C_Am: molar {pub: in};
    var C_Ps: molar {pub: in};
    var k_FlEx: first_order_rate_constant {pub: in};
    C_Ha = Q_Ha/V_Ru;
    P_Ha_WrHa = Y_Ha_WrHa*D_Wr;
    P_Ha_SrHa = Y_Ha_SrHa*D_Sr;
    P_Ha_LaHa = Y_Ha_LaHa*D_La;
    P_Ha_SdHa = Y_Ha_SdHa*U_Sd_SdHa;
    P_Ha_MaMd = Y_Ha_MaMd*U_As_MaMd;
    U_Ha_AmMa = R_Ha_AmMa*U_Am_AmMa;
    U_Ha_PsMa = R_Ha_PsMa*U_Ps_PsMa;
    U_Ha_McMa = R_Ha_McMa*U_Mc_McMa;
    U_Ha_HaAs = v_HaAs/(1{dimensionless}+M_Ha_HaAs/C_Ha);
    U_Ha_HaVa = v_HaVa*((1{dimensionless}-f_Po_Ma)/((1{dimensionless}+M_Ha_HaVa/C_Ha)*(1{dimensionless}+C_Am/J_Am_HaVa)*(C_Ps/J_Ps_HaVa)))+v_HaVa*f_Po_Ma/(1{dimensionless}+M_Ha_HaVa/C_Ha);
    U_Ha_HaEx = k_HaEx*Q_Ha;
    ode(Q_Ha, time) = P_Ha_WrHa+P_Ha_SrHa+P_Ha_SdHa+P_Ha_MaMd+P_Ha_LaHa-(U_Ha_AmMa+U_Ha_PsMa+U_Ha_McMa+U_Ha_HaAs+U_Ha_HaVa+U_Ha_HaEx);
    v_HaAs = v_HaAs_star*Q_Ma;
    v_HaVa = v_HaVa_star*Q_Ma;
    k_HaEx = k_FlEx;
  enddef;

  // title: Q_Hc
  // alternative: hexose availability to fibrolytic microbes
  def comp Q_Hc as
    var C_Hc: molar {pub: out};
    var U_Hc_AmMc: mole_per_day {pub: out};
    var U_Hc_HcVa: mole_per_day {pub: out};
    var U_Hc_PsMc: mole_per_day {pub: out};
    var Q_Hc: mole {init: 1.000};
    var P_Hc_FdHc: mole_per_day;
    var U_Hc_HcEx: mole_per_day;
    var R_Hc_AmMc: dimensionless {init: 1.793};
    var R_Hc_PsMc: dimensionless {init: 1.291};
    var v_HcVa: mole_per_day;
    var v_HcVa_star: mole_per_gram_day {init: 0.1646};
    var k_HcEx: first_order_rate_constant;
    var Y_Hc_FdHc: dimensionless {init: 1.0};
    var M_Hc_HcVa: molar {init: 0.055};
    var J_Am_HcVa: molar {init: 0.00861};
    var J_Ps_HcVa: molar {init: 0.01465};
    var time: day {pub: in};
    var Q_Mc: gram {pub: in};
    var V_Ru: litre {pub: in};
    var U_Fd_FdHc: mole_per_day {pub: in};
    var U_Am_AmMc: mole_per_day {pub: in};
    var U_Ps_PsMc: mole_per_day {pub: in};
    var C_Ps: molar {pub: in};
    var C_Am: molar {pub: in};
    var k_FlEx: first_order_rate_constant {pub: in};
    C_Hc = Q_Hc/V_Ru;
    P_Hc_FdHc = Y_Hc_FdHc*U_Fd_FdHc;
    U_Hc_AmMc = R_Hc_AmMc*U_Am_AmMc;
    U_Hc_PsMc = R_Hc_PsMc*U_Ps_PsMc;
    U_Hc_HcVa = v_HcVa/((1{dimensionless}+M_Hc_HcVa/C_Hc)*(1{dimensionless}+C_Am/J_Am_HcVa+C_Ps/J_Ps_HcVa));
    U_Hc_HcEx = k_HcEx*Q_Hc;
    ode(Q_Hc, time) = P_Hc_FdHc-(U_Hc_AmMc+U_Hc_PsMc+U_Hc_HcVa+U_Hc_HcEx);
    v_HcVa = v_HcVa_star*Q_Mc;
    k_HcEx = k_FlEx;
  enddef;

  // title: Q_Ma
  // alternative: amylolytic microbes pool
  def comp Q_Ma as
    var Q_Ma: gram {pub: out, init: 1.000};
    var C_Ma: gram_per_litre {pub: out};
    var U_Ma_MaMd: gram_per_day {pub: out};
    var U_Mc_McMa: gram_per_day {pub: out};
    var P_Ma_AmMa: gram_per_day;
    var P_Ma_PsMa: gram_per_day;
    var P_Ma_McMa: gram_per_day;
    var U_Ma_PoEx: gram_per_day;
    var U_Ma_MaEx: gram_per_day;
    var k_MaMd: first_order_rate_constant;
    var Y_Ma_AmMa: gram_per_mole {init: 118.91};
    var Y_Ma_PsMa: gram_per_mole {init: 149.48};
    var Y_Ma_McMa: dimensionless {init: 149.48};
    var time: day {pub: in};
    var V_Ru: litre {pub: in};
    var M_Ha_McMa: molar {pub: in};
    var f_Po_Ma: dimensionless {pub: in};
    var U_Am_AmMa: mole_per_day {pub: in};
    var U_Ps_PsMa: mole_per_day {pub: in};
    var U_Mc_McEg: gram_per_day {pub: in};
    var C_Ha: molar {pub: in};
    var k_FlEx: first_order_rate_constant {pub: in};
    var k_MaEx: first_order_rate_constant {pub: in};
    var k_PoEx: first_order_rate_constant {pub: in};
    C_Ma = Q_Ma/V_Ru;
    P_Ma_AmMa = Y_Ma_AmMa*U_Am_AmMa;
    P_Ma_PsMa = Y_Ma_PsMa*U_Ps_PsMa;
    P_Ma_McMa = Y_Ma_McMa*U_Mc_McMa;
    U_Ma_MaMd = k_MaMd*Q_Ma*f_Po_Ma;
    U_Ma_MaEx = k_MaEx*Q_Ma*(1{dimensionless}-f_Po_Ma);
    U_Ma_PoEx = k_PoEx*Q_Ma*f_Po_Ma;
    ode(Q_Ma, time) = P_Ma_AmMa+P_Ma_PsMa+P_Ma_McMa-(U_Ma_MaMd+U_Mc_McMa+U_Ma_PoEx);
    U_Mc_McMa = U_Mc_McEg/(1{dimensionless}+M_Ha_McMa/C_Ha);
    k_MaMd = k_MaEx-k_PoEx;
  enddef;

  // title: Q_As
  // alternative: microbial storage polysaccharides pool
  def comp Q_As as
    var U_As_MaMd: gram_per_day {pub: out};
    var Q_As: gram {init: 1.000};
    var C_As: gram_per_litre;
    var P_As_HaAs: gram_per_day;
    var U_As_PoEx: gram_per_day;
    var U_As_AsEx: gram_per_day;
    var k_AsEx: first_order_rate_constant;
    var k_AsMd: first_order_rate_constant;
    var Y_As_HaAs: gram_per_mole {init: 112.5};
    var time: day {pub: in};
    var V_Ru: litre {pub: in};
    var U_Ha_HaAs: mole_per_day {pub: in};
    var f_Po_Ma: dimensionless {pub: in};
    var k_FlEx: first_order_rate_constant {pub: in};
    var k_MaEx: first_order_rate_constant {pub: in};
    var k_PoEx: first_order_rate_constant {pub: in};
    C_As = Q_As/V_Ru;
    P_As_HaAs = Y_As_HaAs*U_Ha_HaAs;
    U_As_MaMd = k_AsMd*Q_As*f_Po_Ma;
    U_As_AsEx = k_AsEx*Q_As*(1{dimensionless}-f_Po_Ma);
    U_As_PoEx = k_PoEx*Q_As*f_Po_Ma;
    ode(Q_As, time) = P_As_HaAs-(U_As_MaMd+U_As_AsEx+U_As_PoEx);
    k_AsEx = k_FlEx;
    k_AsMd = k_MaEx-k_PoEx;
  enddef;

  // title: Q_Mc
  // alternative: fibrolytic microbes pool
  def comp Q_Mc as
    var Q_Mc: gram {pub: out, init: 1.000};
    var U_Mc_McEg: gram_per_day {pub: out};
    var C_Mc: gram_per_litre;
    var P_Mc_AmMc: gram_per_day;
    var P_Mc_PsMc: gram_per_day;
    var U_Mc_McEx: gram_per_day;
    var k_McEx: first_order_rate_constant;
    var Y_Mc_AmMc: gram_per_mole {init: 118.91};
    var Y_Mc_PsMc: gram_per_mole {init: 149.48};
    var v_McEg: gram_per_day;
    var v_McEg_star: first_order_rate_constant {init: 15.439};
    var M_Mc_McEg: gram_per_litre {init: 34.694};
    var time: day {pub: in};
    var V_Ru: litre {pub: in};
    var Q_Ma: gram {pub: in};
    var C_Ma: gram_per_litre {pub: in};
    var U_Am_AmMc: mole_per_day {pub: in};
    var U_Ps_PsMc: mole_per_day {pub: in};
    var f_Po_Ma: dimensionless {pub: in};
    var k_SoEx: first_order_rate_constant {pub: in};
    C_Mc = Q_Mc/V_Ru;
    P_Mc_AmMc = Y_Mc_AmMc*U_Am_AmMc;
    P_Mc_PsMc = Y_Mc_PsMc*U_Ps_PsMc;
    U_Mc_McEg = v_McEg/(1{dimensionless}+M_Mc_McEg/(C_Mc+C_Ma*(1{dimensionless}-f_Po_Ma)));
    U_Mc_McEx = k_McEx*Q_Mc;
    ode(Q_Mc, time) = P_Mc_AmMc+P_Mc_PsMc-(U_Mc_McEg+U_Mc_McEx);
    v_McEg = v_McEg_star*Q_Ma*f_Po_Ma*C_Mc/(C_Mc+C_Ma*(1{dimensionless}-f_Po_Ma));
    k_McEx = k_SoEx;
  enddef;

  // title: Q_Ac
  // alternative: aceitic acid pool
  def comp Q_Ac as
    var Q_Ac: mole {init: 1.000};
    var C_Ac: molar;
    var P_Ac_InAc: mole_per_day;
    var P_Ac_AmMa: mole_per_day;
    var P_Ac_AmMc: mole_per_day;
    var P_Ac_PsMa: mole_per_day;
    var P_Ac_PsMc: mole_per_day;
    var P_Ac_HaAs: mole_per_day;
    var P_Ac_HaVa: mole_per_day;
    var P_Ac_HcVa: mole_per_day;
    var P_MaAc_PsAm: mole_per_day;
    var P_McAc_PsAm: mole_per_day;
    var P_Ac_McMa: mole_per_day;
    var P_Ac_McAm: mole_per_day;
    var U_Ac_AcAb: mole_per_day;
    var U_Ac_AcEx: mole_per_day;
    var U_Hf_AmMa: mole_per_day;
    var U_Hf_AmMc: mole_per_day;
    var U_Hf_PsMa: mole_per_day;
    var U_Hf_PsMc: mole_per_day;
    var U_Hf_HaAs: mole_per_day;
    var U_Hf_McMa: mole_per_day;
    var M_Ac_AcAb: molar {init: 0.338};
    var v_AcAb: mole_per_day;
    var v_AcAb_star: mole_per_litre_day {init: 7.86};
    var Y_Ac_LaAc: dimensionless;
    var Y_Ac_HaVa: dimensionless;
    var Y_Ac_PsVa: dimensionless;
    var Y_Ac_AmMa: dimensionless;
    var Y_Ac_AmMc: dimensionless;
    var Y_Ac_PsMa: dimensionless;
    var Y_Ac_PsMc: dimensionless;
    var Y_Ac_HaAs: dimensionless;
    var Y_Ac_McMa: dimensionless;
    var Y_Ac_PsAm: dimensionless;
    var Y_Ac_McAm: dimensionless;
    var Y_Ac_WrAc: dimensionless {init: 1.000};
    var Y_Ac_InAc: molar {init: 0.0167};
    var Y_Ac_StAc: dimensionless {init: 1.000};
    var Y_Ac_CeAc: dimensionless {init: 1.000};
    var Y_Ac_HeAc: dimensionless {init: 1.000};
    var Y_Ac_PsAc: dimensionless {init: 1.000};
    var Y_Ac_HcVa: dimensionless;
    var k_AcEx: first_order_rate_constant;
    var D_Ac: litre_per_day {init: 1.000};
    var J_pH_AcAb: dimensionless {init: 6.45};
    var phi_pH_AcAb: dimensionless {init: 6.48};
    var time: day {pub: in};
    var pH: dimensionless {pub: in};
    var V_Ru: litre {pub: in};
    var k_FlEx: first_order_rate_constant {pub: in};
    var f_Hf_AmMa: dimensionless {pub: in};
    var f_Hf_AmMc: dimensionless {pub: in};
    var f_Hf_PsMa: dimensionless {pub: in};
    var f_Hf_PsMc: dimensionless {pub: in};
    var f_Hf_HaAs: dimensionless {pub: in};
    var f_Hf_McMa: dimensionless {pub: in};
    var f_Lc_Le: dimensionless {pub: in};
    var f_Ce_Fd: dimensionless {pub: in};
    var U_MaPs_PsAm: mole_per_day {pub: in};
    var U_McPs_PsAm: mole_per_day {pub: in};
    var U_Ha_HaAs: mole_per_day {pub: in};
    var U_Ha_AmMa: mole_per_day {pub: in};
    var U_Ha_PsMa: mole_per_day {pub: in};
    var U_Hc_PsMc: mole_per_day {pub: in};
    var U_Ha_McMa: mole_per_day {pub: in};
    var U_Ha_HaVa: mole_per_day {pub: in};
    var U_Hc_HcVa: mole_per_day {pub: in};
    var U_Hc_AmMc: mole_per_day {pub: in};
    var U_Mc_McAm: mole_per_day {pub: in};
    var P_Ha_WrHa: mole_per_day {pub: in};
    var P_Ha_LaHa: mole_per_day {pub: in};
    var P_Ha_SrHa: mole_per_day {pub: in};
    var P_Ha_SdHa: mole_per_day {pub: in};
    var P_Ha_MaMd: mole_per_day {pub: in};
    C_Ac = Q_Ac/V_Ru;
    P_Ac_InAc = Y_Ac_InAc*D_Ac;
    P_Ac_AmMa = Y_Ac_AmMa*U_Hf_AmMa;
    P_Ac_AmMc = Y_Ac_AmMc*U_Hf_AmMc;
    P_Ac_PsMa = Y_Ac_PsMa*U_Hf_PsMa;
    P_Ac_PsMc = Y_Ac_PsMc*U_Hf_PsMc;
    P_Ac_HaAs = Y_Ac_HaAs*U_Hf_HaAs;
    P_Ac_HaVa = Y_Ac_HaVa*U_Ha_HaVa;
    P_Ac_HcVa = Y_Ac_HcVa*U_Hc_HcVa;
    P_MaAc_PsAm = Y_Ac_PsAm*U_MaPs_PsAm;
    P_McAc_PsAm = Y_Ac_PsAm*U_McPs_PsAm;
    P_Ac_McMa = Y_Ac_McMa*U_Hf_McMa;
    P_Ac_McAm = Y_Ac_McAm*U_Mc_McAm;
    U_Ac_AcAb = v_AcAb/(1{dimensionless}+M_Ac_AcAb/C_Ac);
    U_Ac_AcEx = k_AcEx*Q_Ac;
    ode(Q_Ac, time) = P_Ac_InAc+P_Ac_AmMa+P_Ac_AmMc+P_Ac_PsMa+P_Ac_PsMc+P_Ac_HaAs+P_Ac_HaVa+P_Ac_HcVa+P_MaAc_PsAm+P_McAc_PsAm+P_Ac_McMa+P_Ac_McAm-(U_Ac_AcAb+U_Ac_AcEx);
    U_Hf_AmMa = f_Hf_AmMa*U_Ha_AmMa;
    U_Hf_AmMc = f_Hf_AmMc*U_Hc_AmMc;
    U_Hf_PsMa = f_Hf_PsMa*U_Ha_PsMa;
    U_Hf_PsMc = f_Hf_PsMc*U_Hc_PsMc;
    U_Hf_HaAs = f_Hf_HaAs*U_Ha_HaAs;
    U_Hf_McMa = f_Hf_McMa*U_Ha_McMa;
    Y_Ac_LaAc = f_Lc_Le*Y_Ac_WrAc;
    Y_Ac_HaVa = (Y_Ac_WrAc*P_Ha_WrHa+Y_Ac_LaAc*P_Ha_LaHa+Y_Ac_StAc*(P_Ha_SrHa+P_Ha_SdHa+P_Ha_MaMd))/(P_Ha_WrHa+P_Ha_LaHa+P_Ha_SrHa+P_Ha_SdHa+P_Ha_MaMd);
    Y_Ac_HcVa = f_Ce_Fd*Y_Ac_CeAc+(1{dimensionless}-f_Ce_Fd)*Y_Ac_HeAc;
    Y_Ac_PsVa = Y_Ac_PsAc;
    Y_Ac_AmMa = Y_Ac_HaVa;
    Y_Ac_AmMc = Y_Ac_HcVa;
    Y_Ac_PsMa = Y_Ac_HaVa;
    Y_Ac_PsMc = Y_Ac_HcVa;
    Y_Ac_HaAs = Y_Ac_HaVa;
    Y_Ac_McMa = Y_Ac_HcVa;
    Y_Ac_PsAm = Y_Ac_PsVa;
    Y_Ac_McAm = Y_Ac_PsVa;
    v_AcAb = v_AcAb_star*pow(1.0{litre}, 0.25{dimensionless})*(pow(V_Ru, 0.75{dimensionless})/(1.0{dimensionless}+pow(pH/J_pH_AcAb, phi_pH_AcAb)));
    k_AcEx = k_FlEx;
  enddef;

  // title: Q_Pr
  // alternative: propionic acid pool
  def comp Q_Pr as
    var Q_Pr: mole {init: 1.000};
    var C_Pr: molar;
    var P_Pr_InPr: mole_per_day;
    var P_Pr_AmMa: mole_per_day;
    var P_Pr_AmMc: mole_per_day;
    var P_Pr_PsMa: mole_per_day;
    var P_Pr_PsMc: mole_per_day;
    var P_Pr_HaAs: mole_per_day;
    var P_Pr_HaVa: mole_per_day;
    var P_Pr_HcVa: mole_per_day;
    var P_MaPr_PsAm: mole_per_day;
    var P_McPr_PsAm: mole_per_day;
    var P_Pr_McMa: mole_per_day;
    var P_Pr_McAm: mole_per_day;
    var U_Pr_PrAb: mole_per_day;
    var U_Pr_PrEx: mole_per_day;
    var U_Hf_AmMa: mole_per_day;
    var U_Hf_AmMc: mole_per_day;
    var U_Hf_PsMa: mole_per_day;
    var U_Hf_PsMc: mole_per_day;
    var U_Hf_HaAs: mole_per_day;
    var U_Hf_McMa: mole_per_day;
    var M_Pr_PrAb: molar {init: 0.338};
    var v_PrAb: mole_per_day;
    var v_PrAb_star: mole_per_litre_day {init: 7.86};
    var Y_Pr_LaPr: dimensionless;
    var Y_Pr_HaVa: dimensionless;
    var Y_Pr_PsVa: dimensionless;
    var Y_Pr_AmMa: dimensionless;
    var Y_Pr_AmMc: dimensionless;
    var Y_Pr_PsMa: dimensionless;
    var Y_Pr_PsMc: dimensionless;
    var Y_Pr_HaAs: dimensionless;
    var Y_Pr_McMa: dimensionless;
    var Y_Pr_PsAm: dimensionless;
    var Y_Pr_McAm: dimensionless;
    var Y_Pr_WrPr: dimensionless {init: 1.000};
    var Y_Pr_InPr: molar {init: 0.0135};
    var Y_Pr_HcVa: dimensionless;
    var Y_Pr_StPr: dimensionless {init: 1.000};
    var Y_Pr_CePr: dimensionless {init: 1.000};
    var Y_Pr_HePr: dimensionless {init: 1.000};
    var Y_Pr_PsPr: dimensionless {init: 1.000};
    var k_PrEx: first_order_rate_constant;
    var D_Pr: litre_per_day {init: 1.000};
    var phi_pH_PrAb: dimensionless {init: 6.48};
    var J_pH_PrAb: dimensionless {init: 6.45};
    var time: day {pub: in};
    var pH: dimensionless {pub: in};
    var V_Ru: litre {pub: in};
    var k_FlEx: first_order_rate_constant {pub: in};
    var f_Hf_AmMa: dimensionless {pub: in};
    var f_Hf_AmMc: dimensionless {pub: in};
    var f_Hf_PsMa: dimensionless {pub: in};
    var f_Hf_PsMc: dimensionless {pub: in};
    var f_Hf_HaAs: dimensionless {pub: in};
    var f_Hf_McMa: dimensionless {pub: in};
    var f_Lc_Le: dimensionless {pub: in};
    var f_Ce_Fd: dimensionless {pub: in};
    var U_MaPs_PsAm: mole_per_day {pub: in};
    var U_McPs_PsAm: mole_per_day {pub: in};
    var U_Ha_HaAs: mole_per_day {pub: in};
    var U_Ha_AmMa: mole_per_day {pub: in};
    var U_Ha_PsMa: mole_per_day {pub: in};
    var U_Hc_PsMc: mole_per_day {pub: in};
    var U_Ha_McMa: mole_per_day {pub: in};
    var U_Ha_HaVa: mole_per_day {pub: in};
    var U_Hc_HcVa: mole_per_day {pub: in};
    var U_Mc_McAm: mole_per_day {pub: in};
    var U_Hc_AmMc: mole_per_day {pub: in};
    var P_Ha_WrHa: mole_per_day {pub: in};
    var P_Ha_LaHa: mole_per_day {pub: in};
    var P_Ha_SrHa: mole_per_day {pub: in};
    var P_Ha_SdHa: mole_per_day {pub: in};
    var P_Ha_MaMd: mole_per_day {pub: in};
    C_Pr = Q_Pr/V_Ru;
    P_Pr_InPr = Y_Pr_InPr*D_Pr;
    P_Pr_AmMa = Y_Pr_AmMa*U_Hf_AmMa;
    P_Pr_AmMc = Y_Pr_AmMc*U_Hf_AmMc;
    P_Pr_PsMa = Y_Pr_PsMa*U_Hf_PsMa;
    P_Pr_PsMc = Y_Pr_PsMc*U_Hf_PsMc;
    P_Pr_HaAs = Y_Pr_HaAs*U_Hf_HaAs;
    P_Pr_HaVa = Y_Pr_HaVa*U_Ha_HaVa;
    P_Pr_HcVa = Y_Pr_HcVa*U_Hc_HcVa;
    P_MaPr_PsAm = Y_Pr_PsAm*U_MaPs_PsAm;
    P_McPr_PsAm = Y_Pr_PsAm*U_McPs_PsAm;
    P_Pr_McMa = Y_Pr_McMa*U_Hf_McMa;
    P_Pr_McAm = Y_Pr_McAm*U_Mc_McAm;
    U_Pr_PrAb = v_PrAb/(1{dimensionless}+M_Pr_PrAb/C_Pr);
    U_Pr_PrEx = k_PrEx*Q_Pr;
    ode(Q_Pr, time) = P_Pr_InPr+P_Pr_AmMa+P_Pr_AmMc+P_Pr_PsMa+P_Pr_PsMc+P_Pr_HaAs+P_Pr_HaVa+P_Pr_HcVa+P_MaPr_PsAm+P_McPr_PsAm+P_Pr_McMa+P_Pr_McAm-(U_Pr_PrAb+U_Pr_PrEx);
    U_Hf_AmMa = f_Hf_AmMa*U_Ha_AmMa;
    U_Hf_AmMc = f_Hf_AmMc*U_Hc_AmMc;
    U_Hf_PsMa = f_Hf_PsMa*U_Ha_PsMa;
    U_Hf_PsMc = f_Hf_PsMc*U_Hc_PsMc;
    U_Hf_HaAs = f_Hf_HaAs*U_Ha_HaAs;
    U_Hf_McMa = f_Hf_McMa*U_Ha_McMa;
    Y_Pr_LaPr = f_Lc_Le*Y_Pr_WrPr;
    Y_Pr_HaVa = (Y_Pr_WrPr*P_Ha_WrHa+Y_Pr_LaPr*P_Ha_LaHa+Y_Pr_StPr*(P_Ha_SrHa+P_Ha_SdHa+P_Ha_MaMd))/(P_Ha_WrHa+P_Ha_LaHa+P_Ha_SrHa+P_Ha_SdHa+P_Ha_MaMd);
    Y_Pr_HcVa = f_Ce_Fd*Y_Pr_CePr+(1{dimensionless}-f_Ce_Fd)*Y_Pr_HePr;
    Y_Pr_PsVa = Y_Pr_PsPr;
    Y_Pr_AmMa = Y_Pr_HaVa;
    Y_Pr_AmMc = Y_Pr_HcVa;
    Y_Pr_PsMa = Y_Pr_HaVa;
    Y_Pr_PsMc = Y_Pr_HcVa;
    Y_Pr_HaAs = Y_Pr_HaVa;
    Y_Pr_McMa = Y_Pr_HcVa;
    Y_Pr_PsAm = Y_Pr_PsVa;
    Y_Pr_McAm = Y_Pr_PsVa;
    v_PrAb = v_PrAb_star*pow(1.0{litre}, 0.25{dimensionless})*(pow(V_Ru, 0.75{dimensionless})/(1.0{dimensionless}+pow(pH/J_pH_PrAb, phi_pH_PrAb)));
    k_PrEx = k_FlEx;
  enddef;

  // title: Q_Bu
  // alternative: butyric acid pool
  def comp Q_Bu as
    var Q_Bu: mole {init: 1.000};
    var C_Bu: molar;
    var P_Bu_InBu: mole_per_day;
    var P_Bu_AmMa: mole_per_day;
    var P_Bu_AmMc: mole_per_day;
    var P_Bu_PsMa: mole_per_day;
    var P_Bu_PsMc: mole_per_day;
    var P_Bu_HaAs: mole_per_day;
    var P_Bu_HaVa: mole_per_day;
    var P_Bu_HcVa: mole_per_day;
    var P_MaBu_PsAm: mole_per_day;
    var P_McBu_PsAm: mole_per_day;
    var P_Bu_McMa: mole_per_day;
    var P_Bu_McAm: mole_per_day;
    var U_Bu_BuAb: mole_per_day;
    var U_Bu_BuEx: mole_per_day;
    var U_Hf_AmMa: mole_per_day;
    var U_Hf_AmMc: mole_per_day;
    var U_Hf_PsMa: mole_per_day;
    var U_Hf_PsMc: mole_per_day;
    var U_Hf_HaAs: mole_per_day;
    var U_Hf_McMa: mole_per_day;
    var M_Bu_BuAb: molar {init: 0.338};
    var v_BuAb: mole_per_day;
    var v_BuAb_star: mole_per_litre_day {init: 7.86};
    var Y_Bu_LaBu: dimensionless;
    var Y_Bu_HaVa: dimensionless;
    var Y_Bu_PsVa: dimensionless;
    var Y_Bu_AmMa: dimensionless;
    var Y_Bu_AmMc: dimensionless;
    var Y_Bu_PsMa: dimensionless;
    var Y_Bu_PsMc: dimensionless;
    var Y_Bu_HaAs: dimensionless;
    var Y_Bu_McMa: dimensionless;
    var Y_Bu_PsAm: dimensionless;
    var Y_Bu_McAm: dimensionless;
    var Y_Bu_WrBu: dimensionless {init: 1.000};
    var Y_Bu_InBu: molar {init: 0.0114};
    var Y_Bu_HcVa: dimensionless;
    var Y_Bu_StBu: dimensionless {init: 1.000};
    var Y_Bu_CeBu: dimensionless {init: 1.000};
    var Y_Bu_HeBu: dimensionless {init: 1.000};
    var Y_Bu_PsBu: dimensionless {init: 1.000};
    var k_BuEx: first_order_rate_constant;
    var D_Bu: litre_per_day {init: 1.000};
    var phi_pH_BuAb: dimensionless {init: 6.48};
    var J_pH_BuAb: dimensionless {init: 6.45};
    var time: day {pub: in};
    var pH: dimensionless {pub: in};
    var V_Ru: litre {pub: in};
    var k_FlEx: first_order_rate_constant {pub: in};
    var f_Hf_AmMa: dimensionless {pub: in};
    var f_Hf_AmMc: dimensionless {pub: in};
    var f_Hf_PsMa: dimensionless {pub: in};
    var f_Hf_PsMc: dimensionless {pub: in};
    var f_Hf_HaAs: dimensionless {pub: in};
    var f_Hf_McMa: dimensionless {pub: in};
    var f_Lc_Le: dimensionless {pub: in};
    var f_Ce_Fd: dimensionless {pub: in};
    var U_MaPs_PsAm: mole_per_day {pub: in};
    var U_McPs_PsAm: mole_per_day {pub: in};
    var U_Ha_HaAs: mole_per_day {pub: in};
    var U_Ha_AmMa: mole_per_day {pub: in};
    var U_Ha_PsMa: mole_per_day {pub: in};
    var U_Hc_PsMc: mole_per_day {pub: in};
    var U_Ha_McMa: mole_per_day {pub: in};
    var U_Ha_HaVa: mole_per_day {pub: in};
    var U_Hc_HcVa: mole_per_day {pub: in};
    var U_Mc_McAm: mole_per_day {pub: in};
    var U_Hc_AmMc: mole_per_day {pub: in};
    var P_Ha_WrHa: mole_per_day {pub: in};
    var P_Ha_LaHa: mole_per_day {pub: in};
    var P_Ha_SrHa: mole_per_day {pub: in};
    var P_Ha_SdHa: mole_per_day {pub: in};
    var P_Ha_MaMd: mole_per_day {pub: in};
    C_Bu = Q_Bu/V_Ru;
    P_Bu_InBu = Y_Bu_InBu*D_Bu;
    P_Bu_AmMa = Y_Bu_AmMa*U_Hf_AmMa;
    P_Bu_AmMc = Y_Bu_AmMc*U_Hf_AmMc;
    P_Bu_PsMa = Y_Bu_PsMa*U_Hf_PsMa;
    P_Bu_PsMc = Y_Bu_PsMc*U_Hf_PsMc;
    P_Bu_HaAs = Y_Bu_HaAs*U_Hf_HaAs;
    P_Bu_HaVa = Y_Bu_HaVa*U_Ha_HaVa;
    P_Bu_HcVa = Y_Bu_HcVa*U_Hc_HcVa;
    P_MaBu_PsAm = Y_Bu_PsAm*U_MaPs_PsAm;
    P_McBu_PsAm = Y_Bu_PsAm*U_McPs_PsAm;
    P_Bu_McMa = Y_Bu_McMa*U_Hf_McMa;
    P_Bu_McAm = Y_Bu_McAm*U_Mc_McAm;
    U_Bu_BuAb = v_BuAb/(1{dimensionless}+M_Bu_BuAb/C_Bu);
    U_Bu_BuEx = k_BuEx*Q_Bu;
    ode(Q_Bu, time) = P_Bu_InBu+P_Bu_AmMa+P_Bu_AmMc+P_Bu_PsMa+P_Bu_PsMc+P_Bu_HaAs+P_Bu_HaVa+P_Bu_HcVa+P_MaBu_PsAm+P_McBu_PsAm+P_Bu_McMa+P_Bu_McAm-(U_Bu_BuAb+U_Bu_BuEx);
    U_Hf_AmMa = f_Hf_AmMa*U_Ha_AmMa;
    U_Hf_AmMc = f_Hf_AmMc*U_Hc_AmMc;
    U_Hf_PsMa = f_Hf_PsMa*U_Ha_PsMa;
    U_Hf_PsMc = f_Hf_PsMc*U_Hc_PsMc;
    U_Hf_HaAs = f_Hf_HaAs*U_Ha_HaAs;
    U_Hf_McMa = f_Hf_McMa*U_Ha_McMa;
    Y_Bu_LaBu = f_Lc_Le*Y_Bu_WrBu;
    Y_Bu_HaVa = (Y_Bu_WrBu*P_Ha_WrHa+Y_Bu_LaBu*P_Ha_LaHa+Y_Bu_StBu*(P_Ha_SrHa+P_Ha_SdHa+P_Ha_MaMd))/(P_Ha_WrHa+P_Ha_LaHa+P_Ha_SrHa+P_Ha_SdHa+P_Ha_MaMd);
    Y_Bu_HcVa = f_Ce_Fd*Y_Bu_CeBu+(1{dimensionless}-f_Ce_Fd)*Y_Bu_HeBu;
    Y_Bu_PsVa = Y_Bu_PsBu;
    Y_Bu_AmMa = Y_Bu_HaVa;
    Y_Bu_AmMc = Y_Bu_HcVa;
    Y_Bu_PsMa = Y_Bu_HaVa;
    Y_Bu_PsMc = Y_Bu_HcVa;
    Y_Bu_HaAs = Y_Bu_HaVa;
    Y_Bu_McMa = Y_Bu_HcVa;
    Y_Bu_PsAm = Y_Bu_PsVa;
    Y_Bu_McAm = Y_Bu_PsVa;
    v_BuAb = v_BuAb_star*pow(1.0{litre}, 0.25{dimensionless})*(pow(V_Ru, 0.75{dimensionless})/(1.0{dimensionless}+pow(pH/J_pH_BuAb, phi_pH_BuAb)));
    k_BuEx = k_FlEx;
  enddef;

  // title: Q_Vl
  // alternative: valeric acid pool
  def comp Q_Vl as
    var Q_Vl: mole {init: 1.000};
    var C_Vl: molar;
    var P_Vl_InVl: mole_per_day;
    var P_Vl_AmMa: mole_per_day;
    var P_Vl_AmMc: mole_per_day;
    var P_Vl_PsMa: mole_per_day;
    var P_Vl_PsMc: mole_per_day;
    var P_Vl_HaAs: mole_per_day;
    var P_Vl_HaVa: mole_per_day;
    var P_Vl_HcVa: mole_per_day;
    var P_MaVl_PsAm: mole_per_day;
    var P_McVl_PsAm: mole_per_day;
    var P_Vl_McMa: mole_per_day;
    var P_Vl_McAm: mole_per_day;
    var U_Vl_VlAb: mole_per_day;
    var U_Vl_VlEx: mole_per_day;
    var U_Hf_AmMa: mole_per_day;
    var U_Hf_AmMc: mole_per_day;
    var U_Hf_PsMa: mole_per_day;
    var U_Hf_PsMc: mole_per_day;
    var U_Hf_HaAs: mole_per_day;
    var U_Hf_McMa: mole_per_day;
    var M_Vl_VlAb: molar {init: 0.338};
    var v_VlAb: mole_per_day;
    var v_VlAb_star: mole_per_litre_day {init: 7.86};
    var Y_Vl_LaVl: dimensionless;
    var Y_Vl_HaVa: dimensionless;
    var Y_Vl_PsVa: dimensionless;
    var Y_Vl_AmMa: dimensionless;
    var Y_Vl_AmMc: dimensionless;
    var Y_Vl_PsMa: dimensionless;
    var Y_Vl_PsMc: dimensionless;
    var Y_Vl_HaAs: dimensionless;
    var Y_Vl_McMa: dimensionless;
    var Y_Vl_PsAm: dimensionless;
    var Y_Vl_McAm: dimensionless;
    var Y_Vl_WrVl: dimensionless {init: 1.000};
    var Y_Vl_InVl: molar {init: 0.0098};
    var Y_Vl_HcVa: dimensionless;
    var Y_Vl_StVl: dimensionless {init: 1.000};
    var Y_Vl_CeVl: dimensionless {init: 1.000};
    var Y_Vl_HeVl: dimensionless {init: 1.000};
    var Y_Vl_PsVl: dimensionless {init: 1.000};
    var k_VlEx: first_order_rate_constant;
    var D_Vl: litre_per_day {init: 1.000};
    var phi_pH_VlAb: dimensionless {init: 6.48};
    var J_pH_VlAb: dimensionless {init: 6.45};
    var time: day {pub: in};
    var pH: dimensionless {pub: in};
    var V_Ru: litre {pub: in};
    var k_FlEx: first_order_rate_constant {pub: in};
    var f_Hf_AmMa: dimensionless {pub: in};
    var f_Hf_AmMc: dimensionless {pub: in};
    var f_Hf_PsMa: dimensionless {pub: in};
    var f_Hf_PsMc: dimensionless {pub: in};
    var f_Hf_HaAs: dimensionless {pub: in};
    var f_Hf_McMa: dimensionless {pub: in};
    var f_Lc_Le: dimensionless {pub: in};
    var f_Ce_Fd: dimensionless {pub: in};
    var U_MaPs_PsAm: mole_per_day {pub: in};
    var U_McPs_PsAm: mole_per_day {pub: in};
    var U_Ha_HaAs: mole_per_day {pub: in};
    var U_Ha_AmMa: mole_per_day {pub: in};
    var U_Ha_PsMa: mole_per_day {pub: in};
    var U_Hc_PsMc: mole_per_day {pub: in};
    var U_Ha_McMa: mole_per_day {pub: in};
    var U_Ha_HaVa: mole_per_day {pub: in};
    var U_Hc_HcVa: mole_per_day {pub: in};
    var U_Mc_McAm: mole_per_day {pub: in};
    var U_Hc_AmMc: mole_per_day {pub: in};
    var P_Ha_WrHa: mole_per_day {pub: in};
    var P_Ha_LaHa: mole_per_day {pub: in};
    var P_Ha_SrHa: mole_per_day {pub: in};
    var P_Ha_SdHa: mole_per_day {pub: in};
    var P_Ha_MaMd: mole_per_day {pub: in};
    C_Vl = Q_Vl/V_Ru;
    P_Vl_InVl = Y_Vl_InVl*D_Vl;
    P_Vl_AmMa = Y_Vl_AmMa*U_Hf_AmMa;
    P_Vl_AmMc = Y_Vl_AmMc*U_Hf_AmMc;
    P_Vl_PsMa = Y_Vl_PsMa*U_Hf_PsMa;
    P_Vl_PsMc = Y_Vl_PsMc*U_Hf_PsMc;
    P_Vl_HaAs = Y_Vl_HaAs*U_Hf_HaAs;
    P_Vl_HaVa = Y_Vl_HaVa*U_Ha_HaVa;
    P_Vl_HcVa = Y_Vl_HcVa*U_Hc_HcVa;
    P_MaVl_PsAm = Y_Vl_PsAm*U_MaPs_PsAm;
    P_McVl_PsAm = Y_Vl_PsAm*U_McPs_PsAm;
    P_Vl_McMa = Y_Vl_McMa*U_Hf_McMa;
    P_Vl_McAm = Y_Vl_McAm*U_Mc_McAm;
    U_Vl_VlAb = v_VlAb/(1{dimensionless}+M_Vl_VlAb/C_Vl);
    U_Vl_VlEx = k_VlEx*Q_Vl;
    ode(Q_Vl, time) = P_Vl_InVl+P_Vl_AmMa+P_Vl_AmMc+P_Vl_PsMa+P_Vl_PsMc+P_Vl_HaAs+P_Vl_HaVa+P_Vl_HcVa+P_MaVl_PsAm+P_McVl_PsAm+P_Vl_McMa+P_Vl_McAm-(U_Vl_VlAb+U_Vl_VlEx);
    U_Hf_AmMa = f_Hf_AmMa*U_Ha_AmMa;
    U_Hf_AmMc = f_Hf_AmMc*U_Hc_AmMc;
    U_Hf_PsMa = f_Hf_PsMa*U_Ha_PsMa;
    U_Hf_PsMc = f_Hf_PsMc*U_Hc_PsMc;
    U_Hf_HaAs = f_Hf_HaAs*U_Ha_HaAs;
    U_Hf_McMa = f_Hf_McMa*U_Ha_McMa;
    Y_Vl_LaVl = f_Lc_Le*Y_Vl_WrVl;
    Y_Vl_HaVa = (Y_Vl_WrVl*P_Ha_WrHa+Y_Vl_LaVl*P_Ha_LaHa+Y_Vl_StVl*(P_Ha_SrHa+P_Ha_SdHa+P_Ha_MaMd))/(P_Ha_WrHa+P_Ha_LaHa+P_Ha_SrHa+P_Ha_SdHa+P_Ha_MaMd);
    Y_Vl_HcVa = f_Ce_Fd*Y_Vl_CeVl+(1{dimensionless}-f_Ce_Fd)*Y_Vl_HeVl;
    Y_Vl_PsVa = Y_Vl_PsVl;
    Y_Vl_AmMa = Y_Vl_HaVa;
    Y_Vl_AmMc = Y_Vl_HcVa;
    Y_Vl_PsMa = Y_Vl_HaVa;
    Y_Vl_PsMc = Y_Vl_HcVa;
    Y_Vl_HaAs = Y_Vl_HaVa;
    Y_Vl_McMa = Y_Vl_HcVa;
    Y_Vl_PsAm = Y_Vl_PsVa;
    Y_Vl_McAm = Y_Vl_PsVa;
    v_VlAb = v_VlAb_star*pow(1.0{litre}, 0.25{dimensionless})*(pow(V_Ru, 0.75{dimensionless})/(1.0{dimensionless}+pow(pH/J_pH_VlAb, phi_pH_VlAb)));
    k_VlEx = k_FlEx;
  enddef;

  def comp model_parameters as
    var f_Hf_AmMa: dimensionless {pub: out, init: 0.526};
    var f_Hf_AmMc: dimensionless {pub: out, init: 0.526};
    var f_Hf_PsMa: dimensionless {pub: out, init: 0.711};
    var f_Hf_PsMc: dimensionless {pub: out, init: 0.711};
    var f_Hf_HaAs: dimensionless {pub: out, init: 0.306};
    var f_Hf_McMa: dimensionless {pub: out, init: 0.711};
    var f_Lc_Le: dimensionless {pub: out, init: 2.250};
    var f_Ce_Fd: dimensionless {pub: out, init: 1.000};
    var J_Ha_McAm: molar {pub: out, init: 0.0165};
    var V_Ru: litre {pub: out, init: 1.000};
    var k_FlEx: first_order_rate_constant {pub: out, init: 1.000};
    var k_SoEx: first_order_rate_constant {pub: out, init: 1.000};
    var pH: dimensionless {pub: out, init: 7.000};
    var pm: dimensionless {pub: out, init: 1.000};
    var f: dimensionless {pub: out, init: 1.000};
    var f_Po_Ma: dimensionless {pub: out, init: 0.35};
    var f_Ni_Fe: dimensionless {pub: out, init: 1.000};
    var k_MaEx: first_order_rate_constant {pub: out};
    var k_PoEx: first_order_rate_constant {pub: out};
    k_MaEx = k_FlEx;
    k_PoEx = k_SoEx/2{dimensionless};
  enddef;
  def map between Q_Pd and environment for
    vars time and time;
  enddef;
  def map between Q_Ps and environment for
    vars time and time;
  enddef;
  def map between Q_Pu and environment for
    vars time and time;
  enddef;
  def map between Q_Am and environment for
    vars time and time;
  enddef;
  def map between Q_Li and environment for
    vars time and time;
  enddef;
  def map between Q_Sd and environment for
    vars time and time;
  enddef;
  def map between Q_Fd and environment for
    vars time and time;
  enddef;
  def map between Q_Fu and environment for
    vars time and time;
  enddef;
  def map between Q_Ha and environment for
    vars time and time;
  enddef;
  def map between Q_Hc and environment for
    vars time and time;
  enddef;
  def map between Q_Ma and environment for
    vars time and time;
  enddef;
  def map between Q_As and environment for
    vars time and time;
  enddef;
  def map between Q_Mc and environment for
    vars time and time;
  enddef;
  def map between Q_Ac and environment for
    vars time and time;
  enddef;
  def map between Q_Pr and environment for
    vars time and time;
  enddef;
  def map between Q_Bu and environment for
    vars time and time;
  enddef;
  def map between Q_Vl and environment for
    vars time and time;
  enddef;
  def map between Q_Ma and Q_Pd for
    vars Q_Ma and Q_Ma;
  enddef;
  def map between Q_Mc and Q_Pd for
    vars Q_Mc and Q_Mc;
  enddef;
  def map between model_parameters and Q_Pd for
    vars V_Ru and V_Ru;
    vars k_SoEx and k_SoEx;
  enddef;
  def map between Q_Ma and Q_Ps for
    vars Q_Ma and Q_Ma;
    vars U_Ma_MaMd and U_Ma_MaMd;
    vars U_Ps_PsMa and U_Ps_PsMa;
    vars M_Ha_McMa and M_Ha_McMa;
  enddef;
  def map between Q_Mc and Q_Ps for
    vars Q_Mc and Q_Mc;
    vars U_Mc_McEg and U_Mc_McEg;
    vars U_Ps_PsMc and U_Ps_PsMc;
  enddef;
  def map between Q_Ha and Q_Ps for
    vars C_Ha and C_Ha;
    vars C_Ps and C_Ps;
    vars U_Ha_McMa and U_Ha_McMa;
    vars U_Ps_PsMa and U_Ps_PsMa;
  enddef;
  def map between Q_Pd and Q_Ps for
    vars U_Pd_PdPs and U_Pd_PdPs;
  enddef;
  def map between Q_Hc and Q_Ps for
    vars C_Hc and C_Hc;
    vars U_Hc_PsMc and U_Hc_PsMc;
    vars U_Ps_PsMc and U_Ps_PsMc;
    vars C_Ps and C_Ps;
  enddef;
  def map between model_parameters and Q_Ps for
    vars V_Ru and V_Ru;
    vars k_FlEx and k_FlEx;
    vars J_Ha_McAm and J_Ha_McAm;
  enddef;
  def map between model_parameters and Q_Pu for
    vars V_Ru and V_Ru;
    vars k_SoEx and k_SoEx;
  enddef;
  def map between Q_Ma and Q_Am for
    vars Q_Ma and Q_Ma;
    vars U_Am_AmMa and U_Am_AmMa;
  enddef;
  def map between Q_Mc and Q_Am for
    vars Q_Mc and Q_Mc;
    vars U_Am_AmMc and U_Am_AmMc;
    vars U_Mc_McEg and U_Mc_McEg;
  enddef;
  def map between Q_Ha and Q_Am for
    vars C_Ha and C_Ha;
    vars C_Am and C_Am;
    vars U_Am_AmMa and U_Am_AmMa;
  enddef;
  def map between Q_Hc and Q_Am for
    vars C_Hc and C_Hc;
    vars U_Am_AmMc and U_Am_AmMc;
    vars C_Am and C_Am;
  enddef;
  def map between Q_Ps and Q_Am for
    vars U_McPs_PsAm and U_McPs_PsAm;
    vars U_MaPs_PsAm and U_MaPs_PsAm;
  enddef;
  def map between model_parameters and Q_Am for
    vars V_Ru and V_Ru;
    vars k_FlEx and k_FlEx;
    vars J_Ha_McAm and J_Ha_McAm;
    vars pH and pH;
    vars f_Po_Ma and f_Po_Ma;
    vars f_Ni_Fe and f_Ni_Fe;
  enddef;
  def map between model_parameters and Q_Li for
    vars V_Ru and V_Ru;
    vars k_FlEx and k_FlEx;
  enddef;
  def map between Q_Ma and Q_Li for
    vars U_Ma_MaMd and U_Ma_MaMd;
  enddef;
  def map between model_parameters and Q_Sd for
    vars V_Ru and V_Ru;
    vars k_SoEx and k_SoEx;
  enddef;
  def map between Q_Ma and Q_Sd for
    vars Q_Ma and Q_Ma;
  enddef;
  def map between model_parameters and Q_Fd for
    vars V_Ru and V_Ru;
    vars k_SoEx and k_SoEx;
    vars pm and pm;
    vars f and f;
  enddef;
  def map between Q_Mc and Q_Fd for
    vars Q_Mc and Q_Mc;
  enddef;
  def map between model_parameters and Q_Fu for
    vars V_Ru and V_Ru;
    vars k_SoEx and k_SoEx;
  enddef;
  def map between Q_Ma and Q_Ha for
    vars Q_Ma and Q_Ma;
    vars C_Ha and C_Ha;
    vars U_Mc_McMa and U_Mc_McMa;
  enddef;
  def map between Q_As and Q_Ha for
    vars U_As_MaMd and U_As_MaMd;
    vars U_Ha_HaAs and U_Ha_HaAs;
  enddef;
  def map between Q_Sd and Q_Ha for
    vars U_Sd_SdHa and U_Sd_SdHa;
  enddef;
  def map between model_parameters and Q_Ha for
    vars V_Ru and V_Ru;
    vars k_FlEx and k_FlEx;
    vars f_Po_Ma and f_Po_Ma;
  enddef;
  def map between Q_Mc and Q_Hc for
    vars Q_Mc and Q_Mc;
  enddef;
  def map between Q_Fd and Q_Hc for
    vars U_Fd_FdHc and U_Fd_FdHc;
  enddef;
  def map between model_parameters and Q_Hc for
    vars V_Ru and V_Ru;
    vars k_FlEx and k_FlEx;
  enddef;
  def map between Q_Mc and Q_Ma for
    vars U_Mc_McEg and U_Mc_McEg;
    vars Q_Ma and Q_Ma;
    vars C_Ma and C_Ma;
  enddef;
  def map between model_parameters and Q_Ma for
    vars V_Ru and V_Ru;
    vars k_FlEx and k_FlEx;
    vars k_MaEx and k_MaEx;
    vars f_Po_Ma and f_Po_Ma;
    vars k_PoEx and k_PoEx;
  enddef;
  def map between model_parameters and Q_As for
    vars V_Ru and V_Ru;
    vars k_FlEx and k_FlEx;
    vars k_MaEx and k_MaEx;
    vars f_Po_Ma and f_Po_Ma;
    vars k_PoEx and k_PoEx;
  enddef;
  def map between model_parameters and Q_Mc for
    vars V_Ru and V_Ru;
    vars f_Po_Ma and f_Po_Ma;
    vars k_SoEx and k_SoEx;
  enddef;
  def map between Q_Ps and Q_Ac for
    vars U_MaPs_PsAm and U_MaPs_PsAm;
    vars U_McPs_PsAm and U_McPs_PsAm;
  enddef;
  def map between Q_Am and Q_Ac for
    vars U_Mc_McAm and U_Mc_McAm;
  enddef;
  def map between Q_Ha and Q_Ac for
    vars U_Ha_HaAs and U_Ha_HaAs;
    vars U_Ha_AmMa and U_Ha_AmMa;
    vars U_Ha_McMa and U_Ha_McMa;
    vars U_Ha_PsMa and U_Ha_PsMa;
    vars U_Ha_HaVa and U_Ha_HaVa;
    vars P_Ha_WrHa and P_Ha_WrHa;
    vars P_Ha_LaHa and P_Ha_LaHa;
    vars P_Ha_SrHa and P_Ha_SrHa;
    vars P_Ha_SdHa and P_Ha_SdHa;
    vars P_Ha_MaMd and P_Ha_MaMd;
  enddef;
  def map between Q_Hc and Q_Ac for
    vars U_Hc_AmMc and U_Hc_AmMc;
    vars U_Hc_PsMc and U_Hc_PsMc;
    vars U_Hc_HcVa and U_Hc_HcVa;
  enddef;
  def map between model_parameters and Q_Ac for
    vars pH and pH;
    vars V_Ru and V_Ru;
    vars k_FlEx and k_FlEx;
    vars f_Hf_AmMa and f_Hf_AmMa;
    vars f_Hf_AmMc and f_Hf_AmMc;
    vars f_Hf_PsMa and f_Hf_PsMa;
    vars f_Hf_PsMc and f_Hf_PsMc;
    vars f_Hf_HaAs and f_Hf_HaAs;
    vars f_Hf_McMa and f_Hf_McMa;
    vars f_Lc_Le and f_Lc_Le;
    vars f_Ce_Fd and f_Ce_Fd;
  enddef;
  def map between Q_Ps and Q_Pr for
    vars U_MaPs_PsAm and U_MaPs_PsAm;
    vars U_McPs_PsAm and U_McPs_PsAm;
  enddef;
  def map between Q_Am and Q_Pr for
    vars U_Mc_McAm and U_Mc_McAm;
  enddef;
  def map between Q_Ha and Q_Pr for
    vars U_Ha_HaAs and U_Ha_HaAs;
    vars U_Ha_AmMa and U_Ha_AmMa;
    vars U_Ha_McMa and U_Ha_McMa;
    vars U_Ha_PsMa and U_Ha_PsMa;
    vars U_Ha_HaVa and U_Ha_HaVa;
    vars P_Ha_WrHa and P_Ha_WrHa;
    vars P_Ha_LaHa and P_Ha_LaHa;
    vars P_Ha_SrHa and P_Ha_SrHa;
    vars P_Ha_SdHa and P_Ha_SdHa;
    vars P_Ha_MaMd and P_Ha_MaMd;
  enddef;
  def map between Q_Hc and Q_Pr for
    vars U_Hc_AmMc and U_Hc_AmMc;
    vars U_Hc_PsMc and U_Hc_PsMc;
    vars U_Hc_HcVa and U_Hc_HcVa;
  enddef;
  def map between model_parameters and Q_Pr for
    vars pH and pH;
    vars V_Ru and V_Ru;
    vars k_FlEx and k_FlEx;
    vars f_Hf_AmMa and f_Hf_AmMa;
    vars f_Hf_AmMc and f_Hf_AmMc;
    vars f_Hf_PsMa and f_Hf_PsMa;
    vars f_Hf_PsMc and f_Hf_PsMc;
    vars f_Hf_HaAs and f_Hf_HaAs;
    vars f_Hf_McMa and f_Hf_McMa;
    vars f_Lc_Le and f_Lc_Le;
    vars f_Ce_Fd and f_Ce_Fd;
  enddef;
  def map between Q_Ps and Q_Bu for
    vars U_MaPs_PsAm and U_MaPs_PsAm;
    vars U_McPs_PsAm and U_McPs_PsAm;
  enddef;
  def map between Q_Am and Q_Bu for
    vars U_Mc_McAm and U_Mc_McAm;
  enddef;
  def map between Q_Ha and Q_Bu for
    vars U_Ha_HaAs and U_Ha_HaAs;
    vars U_Ha_AmMa and U_Ha_AmMa;
    vars U_Ha_McMa and U_Ha_McMa;
    vars U_Ha_PsMa and U_Ha_PsMa;
    vars U_Ha_HaVa and U_Ha_HaVa;
    vars P_Ha_WrHa and P_Ha_WrHa;
    vars P_Ha_LaHa and P_Ha_LaHa;
    vars P_Ha_SrHa and P_Ha_SrHa;
    vars P_Ha_SdHa and P_Ha_SdHa;
    vars P_Ha_MaMd and P_Ha_MaMd;
  enddef;
  def map between Q_Hc and Q_Bu for
    vars U_Hc_AmMc and U_Hc_AmMc;
    vars U_Hc_PsMc and U_Hc_PsMc;
    vars U_Hc_HcVa and U_Hc_HcVa;
  enddef;
  def map between model_parameters and Q_Bu for
    vars pH and pH;
    vars V_Ru and V_Ru;
    vars k_FlEx and k_FlEx;
    vars f_Hf_AmMa and f_Hf_AmMa;
    vars f_Hf_AmMc and f_Hf_AmMc;
    vars f_Hf_PsMa and f_Hf_PsMa;
    vars f_Hf_PsMc and f_Hf_PsMc;
    vars f_Hf_HaAs and f_Hf_HaAs;
    vars f_Hf_McMa and f_Hf_McMa;
    vars f_Lc_Le and f_Lc_Le;
    vars f_Ce_Fd and f_Ce_Fd;
  enddef;
  def map between Q_Ps and Q_Vl for
    vars U_MaPs_PsAm and U_MaPs_PsAm;
    vars U_McPs_PsAm and U_McPs_PsAm;
  enddef;
  def map between Q_Am and Q_Vl for
    vars U_Mc_McAm and U_Mc_McAm;
  enddef;
  def map between Q_Ha and Q_Vl for
    vars U_Ha_HaAs and U_Ha_HaAs;
    vars U_Ha_AmMa and U_Ha_AmMa;
    vars U_Ha_McMa and U_Ha_McMa;
    vars U_Ha_PsMa and U_Ha_PsMa;
    vars U_Ha_HaVa and U_Ha_HaVa;
    vars P_Ha_WrHa and P_Ha_WrHa;
    vars P_Ha_LaHa and P_Ha_LaHa;
    vars P_Ha_SrHa and P_Ha_SrHa;
    vars P_Ha_SdHa and P_Ha_SdHa;
    vars P_Ha_MaMd and P_Ha_MaMd;
  enddef;
  def map between Q_Hc and Q_Vl for
    vars U_Hc_AmMc and U_Hc_AmMc;
    vars U_Hc_PsMc and U_Hc_PsMc;
    vars U_Hc_HcVa and U_Hc_HcVa;
  enddef;
  def map between model_parameters and Q_Vl for
    vars pH and pH;
    vars V_Ru and V_Ru;
    vars k_FlEx and k_FlEx;
    vars f_Hf_AmMa and f_Hf_AmMa;
    vars f_Hf_AmMc and f_Hf_AmMc;
    vars f_Hf_PsMa and f_Hf_PsMa;
    vars f_Hf_PsMc and f_Hf_PsMc;
    vars f_Hf_HaAs and f_Hf_HaAs;
    vars f_Hf_McMa and f_Hf_McMa;
    vars f_Lc_Le and f_Lc_Le;
    vars f_Ce_Fd and f_Ce_Fd;
  enddef;
enddef;
