<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  heyd_model_2003.xml

CREATED :  25th November 2003

LAST MODIFIED : 25th November 2003

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of Heyd and Drew's mathematical model for elongation of a peptide chain.
CHANGES:  
  
-->

<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="heyd_2003" name="heyd_2003">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>A mathematical model for elongation of a peptide chain</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
           This CellML model runs in both OpenCell and COR. The units have been checked and they are consistent. We are unsure as to whether or not this CellML model recreates the results of the original model as there are no simple concentration against time simulation figures in the published paper to compare it with. 
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: A mathematical model is presented for the steps in the elongation process, and the steady-state elongation rate as a function of the amino acid concentrations is found. In addition, the reset sub-process of the elongation process is modeled. The rate of elongation of peptide chains is found to be a function of the concentration of the amino acid to be bound and the concentration of all other amino acids. In addition, the overall elongation rate depends on the concentrations of elongation factors.</para>

<para>
The original paper reference is cited below:
</para>

<para>
A Mathematical Model for Elongation of a Peptide Chain, Andrew Heyd and Donald A. Drew, 2003, <emphasis>Bulletin of Mathematical Biology</emphasis>, 65, 1095-1109. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/14607290">PubMed ID: 14607290</ulink>
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>reaction diagram</title>
    </objectinfo>
    <imagedata fileref="heyd_2003.png"/>
  </imageobject>
</mediaobject>
<caption>A schematic diagram displaying the reaction steps described by the mathematical model.</caption>
</informalfigure>

</sect1>
</article>
</documentation>
  
  
  <units name="micromolar">
    <unit units="mole" prefix="micro"/>
    <unit units="litre" exponent="-1"/>
  </units>
  
  <units name="flux">
    <unit units="micromolar"/>
    <unit units="second" exponent="-1"/>
  </units>
  
  <units name="first_order_rate_constant">
    <unit units="second" exponent="-1"/>
  </units>
  
  <units name="second_order_rate_constant">
    <unit units="micromolar" exponent="-1"/>
    <unit units="second" exponent="-1"/>
  </units>
 
  
  <component name="environment">
    <variable units="second" public_interface="out" name="time"/>
  </component>
  
  <component name="kinetic_constants"> 
    <variable units="second_order_rate_constant" public_interface="out" name="k11" initial_value="110.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k11_" initial_value="25.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k71" initial_value="0.1"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k72" initial_value="60.0"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k12" initial_value="110.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k12_" initial_value="0.2"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k51" initial_value="7.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k52" initial_value="0.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k41" initial_value="60.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k31" initial_value="500.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k32" initial_value="50.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k42" initial_value="70.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k22" initial_value="100.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k22_" initial_value="17.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k21" initial_value="100.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k21_" initial_value="0.2"/>
  </component>
  
  <component name="PB"> 
    <variable units="micromolar" public_interface="out" initial_value="0.1" name="PB"/>
    
    <variable units="second_order_rate_constant" public_interface="in" name="k11"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k11_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k71"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k72"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k12"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k12_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kreset1"/>
    <variable units="micromolar" public_interface="in" name="A1"/>
    <variable units="micromolar" public_interface="in" name="A2"/>
    <variable units="micromolar" public_interface="in" name="PC1"/>
    <variable units="micromolar" public_interface="in" name="PF1"/>
    <variable units="micromolar" public_interface="in" name="PG1"/>
    <variable units="micromolar" public_interface="in" name="PC2"/>
    <variable units="micromolar" public_interface="in" name="PF2"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>PB</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k11_ </ci>
              <ci> PC1 </ci>
            </apply>
            <apply>
              <times/>
              <ci> k71 </ci>
              <ci> PF1 </ci>
            </apply>
            <apply>
              <times/>
              <ci> kreset1 </ci>
              <ci> PG1 </ci>
            </apply>
            <apply>
              <times/>
              <ci> k12_ </ci>
              <ci> PC2 </ci>
            </apply>
            <apply>
              <times/>
              <ci> k72 </ci>
              <ci> PF2 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k11 </ci>
              <ci> A1 </ci>
              <ci> PB </ci>
            </apply>
            <apply>
              <times/>
              <ci> k12 </ci>
			  <ci> A2 </ci>
              <ci> PB </ci>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="A1"> 
    <variable units="micromolar" public_interface="out" initial_value="0.1" name="A1"/>
    
    <variable units="second_order_rate_constant" public_interface="in" name="k11"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k11_"/>
    <variable units="micromolar" public_interface="in" name="PC1"/>
    <variable units="micromolar" public_interface="in" name="PB"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>A1</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> k11_ </ci>
            <ci> PC1 </ci>
          </apply>
          <apply>
            <times/>
            <ci> k11 </ci>
            <ci> A1 </ci> 
            <ci> PB </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="A2"> 
    <variable units="micromolar" public_interface="out" initial_value="0.1" name="A2"/>
    
    <variable units="second_order_rate_constant" public_interface="in" name="k12"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k12_"/>
    <variable units="micromolar" public_interface="in" name="PC2"/>
    <variable units="micromolar" public_interface="in" name="PB"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>A2</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> k12_ </ci>
            <ci> PC2 </ci>
          </apply>
          <apply>
            <times/>
            <ci> k12 </ci>
            <ci> A2 </ci> 
            <ci> PB </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="PC1"> 
    <variable units="micromolar" public_interface="out" initial_value="0.1" name="PC1"/>
    
    <variable units="second_order_rate_constant" public_interface="in" name="k11"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k11_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k21"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k21_"/>
    <variable units="micromolar" public_interface="in" name="A1"/>
    <variable units="micromolar" public_interface="in" name="PB"/>
    <variable units="micromolar" public_interface="in" name="PD1"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>PC1</ci> 
        </apply>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci> k11 </ci>
              <ci> A1 </ci>
              <ci> PB </ci>
            </apply>
            <apply>
              <times/>
              <apply>
                <plus/>
                <ci> k11_ </ci>
                <ci> k21 </ci>
              </apply>
              <ci> PC1 </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> k21_ </ci>
            <ci> PD1 </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="PD1"> 
    <variable units="micromolar" public_interface="out" initial_value="0.1" name="PD1"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="k21"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k21_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k31"/>
    <variable units="micromolar" public_interface="in" name="PC1"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>PD1</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> k21 </ci>
            <ci> PC1 </ci>
          </apply>
          <apply>
            <times/>
            <apply>
              <plus/>
              <ci> k21_ </ci>
              <ci> k31 </ci>
            </apply>
            <ci> PD1 </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="PE1"> 
    <variable units="micromolar" public_interface="out" initial_value="0.1" name="PE1"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="k31"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k41"/>
    <variable units="micromolar" public_interface="in" name="PD1"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>PE1</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> k31 </ci>
            <ci> PD1 </ci>
          </apply>
          <apply>
            <times/>
            <ci> k41 </ci>
            <ci> PE1 </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="PF1"> 
    <variable units="micromolar" public_interface="out" initial_value="0.1" name="PF1"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="k41"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k51"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k71"/>
    <variable units="micromolar" public_interface="in" name="PE1"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>PF1</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> k41 </ci>
            <ci> PE1 </ci>
          </apply>
          <apply>
            <times/>
            <apply>
              <plus/>
              <ci> k51 </ci>
              <ci> k71 </ci>
            </apply>
            <ci> PF1 </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="PG1"> 
    <variable units="micromolar" public_interface="out" initial_value="0.1" name="PG1"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="kreset1"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k51"/>
    <variable units="micromolar" public_interface="in" name="PF1"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>PG1</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> k51 </ci>
            <ci> PF1 </ci>
          </apply>
          <apply>
            <times/>
            <ci> kreset1 </ci>
            <ci> PG1 </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="PC2"> 
    <variable units="micromolar" public_interface="out" initial_value="0.1" name="PC2"/>
    
    <variable units="second_order_rate_constant" public_interface="in" name="k12"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k12_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k22"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k22_"/>
    <variable units="micromolar" public_interface="in" name="A2"/>
    <variable units="micromolar" public_interface="in" name="PB"/>
    <variable units="micromolar" public_interface="in" name="PD2"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>PC2</ci> 
        </apply>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci> k12 </ci>
              <ci> A2 </ci>
              <ci> PB </ci>
            </apply>
            <apply>
              <times/>
              <apply>
                <plus/>
                <ci> k12_ </ci>
                <ci> k22 </ci>
              </apply>
              <ci> PC2 </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> k22_ </ci>
            <ci> PD2 </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
    
  <component name="PD2"> 
    <variable units="micromolar" public_interface="out" initial_value="0.1" name="PD2"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="k22"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k22_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k32"/>
    <variable units="micromolar" public_interface="in" name="PC2"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>PD2</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> k22 </ci>
            <ci> PC2 </ci>
          </apply>
          <apply>
            <times/>
            <apply>
              <plus/>
              <ci> k22_ </ci>
              <ci> k32 </ci>
            </apply>
            <ci> PD2 </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="PE2"> 
    <variable units="micromolar" public_interface="out" initial_value="0.1" name="PE2"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="k32"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k42"/>
    <variable units="micromolar" public_interface="in" name="PD2"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/2998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>PE2</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> k32 </ci>
            <ci> PD2 </ci>
          </apply>
          <apply>
            <times/>
            <ci> k42 </ci>
            <ci> PE2 </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="PF2"> 
    <variable units="micromolar" public_interface="out" initial_value="0.1" name="PF2"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="k42"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k52"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k72"/>
    <variable units="micromolar" public_interface="in" name="PE2"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>PF2</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> k42 </ci>
            <ci> PE2 </ci>
          </apply>
          <apply>
            <times/>
            <apply>
              <plus/>
              <ci> k52 </ci>
              <ci> k72 </ci>
            </apply>
            <ci> PF2 </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
 
  
  <component name="kreset1"> 
    <variable units="first_order_rate_constant" public_interface="out" name="kreset1" initial_value="35.0"/>
  </component>
  
  
  <connection>
    <map_components component_2="environment" component_1="PB"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="A1"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="A2"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="PC1"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="PD1"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="PE1"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="PF1"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="PG1"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="PC2"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="PD2"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="PE2"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="PF2"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="PC1" component_1="PB"/>
    <map_variables variable_2="PC1" variable_1="PC1"/>
    <map_variables variable_2="PB" variable_1="PB"/>
  </connection>
  
  <connection>
    <map_components component_2="PF1" component_1="PB"/>
    <map_variables variable_2="PF1" variable_1="PF1"/>
  </connection>
  
  <connection>
    <map_components component_2="PG1" component_1="PB"/>
    <map_variables variable_2="PG1" variable_1="PG1"/>
  </connection>
  
  <connection>
    <map_components component_2="PC2" component_1="PB"/>
    <map_variables variable_2="PC2" variable_1="PC2"/>
    <map_variables variable_2="PB" variable_1="PB"/>
  </connection>
  
  <connection>
    <map_components component_2="PF2" component_1="PB"/>
    <map_variables variable_2="PF2" variable_1="PF2"/>
  </connection>
  
  <connection>
    <map_components component_2="PD1" component_1="PC1"/>
    <map_variables variable_2="PC1" variable_1="PC1"/>
    <map_variables variable_2="PD1" variable_1="PD1"/>
  </connection>
  
  <connection>
    <map_components component_2="PE1" component_1="PD1"/>
    <map_variables variable_2="PD1" variable_1="PD1"/>
  </connection>
  
  <connection>
    <map_components component_2="PF1" component_1="PE1"/>
    <map_variables variable_2="PE1" variable_1="PE1"/>
  </connection>
  
  <connection>
    <map_components component_2="PG1" component_1="PF1"/>
    <map_variables variable_2="PF1" variable_1="PF1"/>
  </connection>
  
  <connection>
    <map_components component_2="PD2" component_1="PC2"/>
    <map_variables variable_2="PC2" variable_1="PC2"/>
    <map_variables variable_2="PD2" variable_1="PD2"/>
  </connection>
  
  <connection>
    <map_components component_2="PE2" component_1="PD2"/>
    <map_variables variable_2="PD2" variable_1="PD2"/>
  </connection>
  
  <connection>
    <map_components component_2="PF2" component_1="PE2"/>
    <map_variables variable_2="PE2" variable_1="PE2"/>
  </connection>
  
  <connection>
    <map_components component_2="A1" component_1="PB"/>
    <map_variables variable_2="PB" variable_1="PB"/>
    <map_variables variable_2="A1" variable_1="A1"/>
  </connection>
  
  <connection>
    <map_components component_2="A2" component_1="PB"/>
    <map_variables variable_2="PB" variable_1="PB"/>
    <map_variables variable_2="A2" variable_1="A2"/>
  </connection>
  
  <connection>
    <map_components component_2="A1" component_1="PC1"/>
    <map_variables variable_2="PC1" variable_1="PC1"/>
    <map_variables variable_2="A1" variable_1="A1"/>
  </connection>
  
  <connection>
    <map_components component_2="A2" component_1="PC2"/>
    <map_variables variable_2="PC2" variable_1="PC2"/>
    <map_variables variable_2="A2" variable_1="A2"/>
  </connection>
  
  <connection>
    <map_components component_2="PB" component_1="kinetic_constants"/>
    <map_variables variable_2="k11" variable_1="k11"/>
    <map_variables variable_2="k11_" variable_1="k11_"/>
    <map_variables variable_2="k12" variable_1="k12"/>
    <map_variables variable_2="k12_" variable_1="k12_"/>
    <map_variables variable_2="k71" variable_1="k71"/>
    <map_variables variable_2="k72" variable_1="k72"/>
  </connection>
  
  <connection>
    <map_components component_2="PC1" component_1="kinetic_constants"/>
    <map_variables variable_2="k11" variable_1="k11"/>
    <map_variables variable_2="k11_" variable_1="k11_"/>
    <map_variables variable_2="k21" variable_1="k21"/>
    <map_variables variable_2="k21_" variable_1="k21_"/>
  </connection>
  
  <connection>
    <map_components component_2="A1" component_1="kinetic_constants"/>
    <map_variables variable_2="k11" variable_1="k11"/>
    <map_variables variable_2="k11_" variable_1="k11_"/>
  </connection>
  
  <connection>
    <map_components component_2="A2" component_1="kinetic_constants"/>
    <map_variables variable_2="k12" variable_1="k12"/>
    <map_variables variable_2="k12_" variable_1="k12_"/>
  </connection>
  
  <connection>
    <map_components component_2="PD1" component_1="kinetic_constants"/>
    <map_variables variable_2="k31" variable_1="k31"/>
    <map_variables variable_2="k21" variable_1="k21"/>
    <map_variables variable_2="k21_" variable_1="k21_"/>
  </connection>
  
  <connection>
    <map_components component_2="PE1" component_1="kinetic_constants"/>
    <map_variables variable_2="k31" variable_1="k31"/>
    <map_variables variable_2="k41" variable_1="k41"/>
  </connection>
  
  <connection>
    <map_components component_2="PF1" component_1="kinetic_constants"/>
    <map_variables variable_2="k41" variable_1="k41"/>
    <map_variables variable_2="k51" variable_1="k51"/>
    <map_variables variable_2="k71" variable_1="k71"/>
  </connection>
  
  <connection>
    <map_components component_2="PG1" component_1="kinetic_constants"/>
    <map_variables variable_2="k51" variable_1="k51"/>
  </connection>
  
  <connection>
    <map_components component_2="PC2" component_1="kinetic_constants"/>
    <map_variables variable_2="k12" variable_1="k12"/>
    <map_variables variable_2="k12_" variable_1="k12_"/>
    <map_variables variable_2="k22" variable_1="k22"/>
    <map_variables variable_2="k22_" variable_1="k22_"/>
  </connection>
  
  <connection>
    <map_components component_2="PD2" component_1="kinetic_constants"/>
    <map_variables variable_2="k32" variable_1="k32"/>
    <map_variables variable_2="k22" variable_1="k22"/>
    <map_variables variable_2="k22_" variable_1="k22_"/>
  </connection>
  
  <connection>
    <map_components component_2="PE2" component_1="kinetic_constants"/>
    <map_variables variable_2="k32" variable_1="k32"/>
    <map_variables variable_2="k42" variable_1="k42"/>
  </connection>
  
  <connection>
    <map_components component_2="PF2" component_1="kinetic_constants"/>
    <map_variables variable_2="k42" variable_1="k42"/>
    <map_variables variable_2="k52" variable_1="k52"/>
    <map_variables variable_2="k72" variable_1="k72"/>
  </connection>
  
  <connection>
    <map_components component_2="PG1" component_1="kreset1"/>
    <map_variables variable_2="kreset1" variable_1="kreset1"/>
  </connection>
  
  <connection>
    <map_components component_2="PB" component_1="kreset1"/>
    <map_variables variable_2="kreset1" variable_1="kreset1"/>
  </connection>
  

<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#4b99e5ca-469c-4922-bda2-d78750bd9f99">
    <rdf:li rdf:resource="rdf:#6e2b3075-eca5-483c-be8d-3bc0ec0c8330"/>
    <rdf:li rdf:resource="rdf:#affecc02-5a31-4aec-b555-870208aca23e"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#d2a1300b-48a6-44fc-adf7-fa11e3fc59f7">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#affecc02-5a31-4aec-b555-870208aca23e">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#5af25911-a3e1-419e-921d-b084361c30aa"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#977fca24-c609-4153-b5f0-b663780362ad">
    <dcterms:W3CDTF>2003-11</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="#heyd_2003">
    <dc:title>
        Heyd and Drew's mathematical model for elongation of a peptide chain.
      </dc:title>
    <cmeta:comment rdf:resource="rdf:#cda07caf-6f6b-46e8-91a2-40d9a721fa88"/>
    <bqs:reference rdf:resource="rdf:#927776d9-22af-4894-bfdc-f9560b4dcbc6"/>
<bqs:reference rdf:parseType="Resource">
  <dc:subject rdf:parseType="Resource">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value>
      <rdf:Bag>
        <rdf:li>peptide synthesis</rdf:li>
        <rdf:li>elongation</rdf:li>
        <rdf:li>metabolism</rdf:li>
      </rdf:Bag>
    </rdf:value>
  </dc:subject>
</bqs:reference>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8fc2041e-592f-4b04-898d-95e0e2b0c40e">
    <vCard:ORG rdf:resource="rdf:#47a7851f-b46c-40ac-a0cf-fceb7560c616"/>
    <vCard:EMAIL rdf:resource="rdf:#d2a1300b-48a6-44fc-adf7-fa11e3fc59f7"/>
    <vCard:N rdf:resource="rdf:#887059d9-c84f-48f8-a2b7-c848376d8bc9"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6e2b3075-eca5-483c-be8d-3bc0ec0c8330">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#9c04d5a7-30e3-42ce-a990-d33cae85b2c6"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#887059d9-c84f-48f8-a2b7-c848376d8bc9">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#927776d9-22af-4894-bfdc-f9560b4dcbc6">
    <bqs:Pubmed_id>14607290</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#f14f9bc4-2cde-4519-843b-b741279dee3d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9c04d5a7-30e3-42ce-a990-d33cae85b2c6">
    <vCard:Given>Andrew</vCard:Given>
    <vCard:Family>Heyd</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#71421e76-03cb-4abd-a3aa-aff76280c076">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#df652e95-010e-4e89-afa7-c5732a4a3c98">
    <dcterms:W3CDTF>2003-11-25</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#cda07caf-6f6b-46e8-91a2-40d9a721fa88">
    <dc:creator rdf:resource="rdf:#71421e76-03cb-4abd-a3aa-aff76280c076"/>
    <rdf:value>
          This is the CellML description of Heyd and Drew's mathematical model 
          for elongation of a peptide chain.
        </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#47a7851f-b46c-40ac-a0cf-fceb7560c616">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f14f9bc4-2cde-4519-843b-b741279dee3d">
    <dc:creator rdf:resource="rdf:#4b99e5ca-469c-4922-bda2-d78750bd9f99"/>
    <dc:title>
            A mathematical model for elongation of a peptide chain
          </dc:title>
    <bqs:volume>65</bqs:volume>
    <bqs:first_page>1095</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#4a56771d-f6b5-4ac3-ae21-8b3a52d83d42"/>
    <dcterms:issued rdf:resource="rdf:#977fca24-c609-4153-b5f0-b663780362ad"/>
    <bqs:last_page>1109</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5af25911-a3e1-419e-921d-b084361c30aa">
    <vCard:Given>Donald</vCard:Given>
    <vCard:Family>Drew</vCard:Family>
    <vCard:Other>A</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4a56771d-f6b5-4ac3-ae21-8b3a52d83d42">
    <dc:title>Bulletin of Mathematical Biology</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher>
        The University of Auckland, Auckland Bioengineering Institute
      </dc:publisher>
    <dcterms:created rdf:resource="rdf:#df652e95-010e-4e89-afa7-c5732a4a3c98"/>
    <dc:creator rdf:resource="rdf:#8fc2041e-592f-4b04-898d-95e0e2b0c40e"/>
  </rdf:Description>
</rdf:RDF>
</model>
