//   FILE :  hynne_model_2001.xml
//
// CREATED :  18th September 2003
//
// LAST MODIFIED : 18th September 2003
//
// AUTHOR :  Catherine Lloyd
//           Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Hynee et al's 2001 full scale model of glycolysis in Saccharomyces cerevisiae
//
// CHANGES:
// publisher: The University of Auckland, Auckland Bioengineering Institute
// created: W3CDTF 2003-09-18T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2007-06-14T12:08:49+12:00; Fixed semicolons in listed links.; Given Catherine; Family Lloyd; Other May
// title: Hynne et al's 2001 full scale model of glycolysis in Saccharomyces cerevisiae.
// comment: FN Catherine Lloyd; This is the CellML description of Hynne et al's 2001 full scale model of glycolysis in Saccharomyces cerevisiae.
// reference: subject_type keyword; metabolism; glycolysis; yeast
// reference: Pubmed_id 12050011; Given F; Family Hynne; Given S; Family Dano; Given P; Family Sorensen; Other G; title Full-scale model of glycolysis in Saccharomyces cerevisiae; volume 94; first_page 121; title Biophysical Chemistry; W3CDTF 2001-12-11; last_page 163
// species: Saccharomyces cerevisae
def model hynne_2001 as
  // Full-scale model of glycolysis in Saccharomyces cerevisiae
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This model runs in both OpenCell and COR to replicate the published results (figure 6). The units have been checked and they are consistent. This CellML model translation is based on the curated SBML model in the BioModels database (BIOMD0000000061.xml). Note that in order to replicate figure 6 the model has to be run for at least 100 seconds first to allow all the oscillations to stabilise.
  //
  // Model Structure
  //
  // ABSTRACT: We present a powerful, general method of fitting a model of a biochemical pathway to experimental substrate concentrations and dynamical properties measured at a stationary state, when the mechanism is largely known but kinetic parameters are lacking. Rate constants and maximum velocities are calculated from the experimental data by simple algebra without integration of kinetic equations. Using this direct approach, we fit a comprehensive model of glycolysis and glycolytic oscillations in intact yeast cells to data measured on a suspension of living cells of Saccharomyces cerevisiae near a Hopf bifurcation, and to a large set of stationary concentrations and other data estimated from comparable batch experiments. The resulting model agrees with almost all experimentally known stationary concentrations and metabolic fluxes, with the frequency of oscillation and with the majority of other experimentally known kinetic and dynamical variables. The functional forms of the rate equations have not been optimized.
  //
  // The original paper reference is cited below:
  //
  // Full-scale model of glycolysis in Saccharomyces cerevisiae, F. Hynne, S. Dano, and P. G. Sorensen , 2001, Biophysical Chemistry , 94, 121-163. PubMed ID: 11744196 (http://www.ncbi.nlm.nih.gov/pubmed/11744196)
  //
  // reaction diagram
  //
  // The glycolysis pathway described by the mathematical model.
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar2 as
    unit millimolar {expo: 2};
  enddef;
  def unit minute as
    unit second {mult: 60.0};
  enddef;
  def unit flux as
    unit millimolar;
    unit minute {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit millimolar {expo: -1};
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  // title: Glc_x_0
  // alternative: mixed flow glucose
  def comp Glc_x_0 as
    var Glc_x_0: millimolar {init: 24.0, pub: out};
  enddef;

  // title: Glc_x
  // alternative: extracellular glucose
  def comp Glc_x as
    var Glc_x: millimolar {init: 6.7, pub: out};
    var GlcTrans: flux {pub: in};
    var inGlc: flux {pub: in};
    var time: minute {pub: in};
    ode(Glc_x, time) = inGlc-GlcTrans;
  enddef;

  // title: Glc
  // alternative: cytosolic glucose
  def comp Glc as
    var Glc: millimolar {init: 0.573074, pub: out};
    var GlcTrans: flux {pub: in};
    var HK: flux {pub: in};
    var time: minute {pub: in};
    ode(Glc, time) = 59{dimensionless}*GlcTrans-HK;
  enddef;

  // title: G6P
  // alternative: glucose-6-phopshate
  def comp G6P as
    var G6P: millimolar {init: 4.2, pub: out};
    var PGI: flux {pub: in};
    var HK: flux {pub: in};
    var storage: flux {pub: in};
    var time: minute {pub: in};
    ode(G6P, time) = HK-(PGI+storage);
  enddef;

  // title: F6P
  // alternative: fructose-6 phopshate
  def comp F6P as
    var F6P: millimolar {init: 0.49, pub: out};
    var PGI: flux {pub: in};
    var PFK: flux {pub: in};
    var time: minute {pub: in};
    ode(F6P, time) = PGI-PFK;
  enddef;

  // title: FBP
  // alternative: fructose-1,6 bisphopshate
  def comp FBP as
    var FBP: millimolar {init: 4.64, pub: out};
    var PFK: flux {pub: in};
    var ALD: flux {pub: in};
    var time: minute {pub: in};
    ode(FBP, time) = PFK-ALD;
  enddef;

  // title: GAP
  // alternative: glyceraldehyde-3-phopshate
  def comp GAP as
    var GAP: millimolar {init: 0.115, pub: out};
    var GAPDH: flux {pub: in};
    var ALD: flux {pub: in};
    var TIM: flux {pub: in};
    var time: minute {pub: in};
    ode(GAP, time) = ALD+TIM-GAPDH;
  enddef;

  // title: DHAP
  // alternative: 1,3-diphosphoglycerate
  def comp DHAP as
    var DHAP: millimolar {init: 2.95, pub: out};
    var ALD: flux {pub: in};
    var TIM: flux {pub: in};
    var lpGlyc: flux {pub: in};
    var time: minute {pub: in};
    ode(DHAP, time) = ALD-(TIM+lpGlyc);
  enddef;

  // title: BPG
  // alternative: 1,3-bisphosphoglycerate
  def comp BPG as
    var BPG: millimolar {init: 0.00027, pub: out};
    var lpPEP: flux {pub: in};
    var GAPDH: flux {pub: in};
    var time: minute {pub: in};
    ode(BPG, time) = GAPDH-lpPEP;
  enddef;

  // title: PEP
  // alternative: phosphoenolpyruvate
  def comp PEP as
    var PEP: millimolar {init: 0.04, pub: out};
    var lpPEP: flux {pub: in};
    var PK: flux {pub: in};
    var time: minute {pub: in};
    ode(PEP, time) = lpPEP-PK;
  enddef;

  // title: Pyr
  // alternative: pyruvate
  def comp Pyr as
    var Pyr: millimolar {init: 8.7, pub: out};
    var PK: flux {pub: in};
    var PDC: flux {pub: in};
    var time: minute {pub: in};
    ode(Pyr, time) = PK-PDC;
  enddef;

  // title: ATP
  // alternative: adenosine triphosphate
  def comp ATP as
    var ATP: millimolar {init: 2.1, pub: out};
    var HK: flux {pub: in};
    var lpPEP: flux {pub: in};
    var PFK: flux {pub: in};
    var PK: flux {pub: in};
    var storage: flux {pub: in};
    var consum: flux {pub: in};
    var AK: flux {pub: in};
    var time: minute {pub: in};
    ode(ATP, time) = PK+lpPEP-(PFK+storage+HK+consum+AK);
  enddef;

  // title: ADP
  // alternative: adenosine diphosphate
  def comp ADP as
    var ADP: millimolar {init: 1.5, pub: out};
    var HK: flux {pub: in};
    var lpPEP: flux {pub: in};
    var PFK: flux {pub: in};
    var PK: flux {pub: in};
    var storage: flux {pub: in};
    var consum: flux {pub: in};
    var AK: flux {pub: in};
    var time: minute {pub: in};
    ode(ADP, time) = PFK+storage+HK+consum+2{dimensionless}*AK-(PK+lpPEP);
  enddef;

  // title: AMP
  // alternative: adenosine monophosphate
  def comp AMP as
    var AMP: millimolar {init: 0.33, pub: out};
    var AK: flux {pub: in};
    var time: minute {pub: in};
    ode(AMP, time) = -AK;
  enddef;

  // title: CN_x_0
  // alternative: mixed flow concentration of cyanide
  def comp CN_x_0 as
    var CN_x_0: millimolar {init: 5.60, pub: out};
  enddef;

  // title: CN_x
  // alternative: total concentration of adenosine phosphates
  def comp CN_x as
    var CN_x: millimolar {init: 5.20358, pub: out};
    var lacto: flux {pub: in};
    var inCN: flux {pub: in};
    var time: minute {pub: in};
    ode(CN_x, time) = inCN-lacto;
  enddef;

  // title: ACA
  // alternative: cytosolic acetaldehyde
  def comp ACA as
    var ACA: millimolar {init: 1.48153, pub: out};
    var difACA: flux {pub: in};
    var PDC: flux {pub: in};
    var ADH: flux {pub: in};
    var time: minute {pub: in};
    ode(ACA, time) = PDC-(59{dimensionless}*difACA+ADH);
  enddef;

  // title: ACA_x
  // alternative: extracellular acetaldehyde
  def comp ACA_x as
    var ACA_x: millimolar {init: 1.28836, pub: out};
    var lacto: flux {pub: in};
    var difACA: flux {pub: in};
    var outACA: flux {pub: in};
    var time: minute {pub: in};
    ode(ACA_x, time) = difACA-(lacto+outACA);
  enddef;

  // title: EtOH
  // alternative: cytosolic ethanol
  def comp EtOH as
    var EtOH: millimolar {init: 19.2379, pub: out};
    var difEtOH: flux {pub: in};
    var ADH: flux {pub: in};
    var time: minute {pub: in};
    ode(EtOH, time) = ADH-59{dimensionless}*difEtOH;
  enddef;

  // title: EtOH_x
  // alternative: extracellular ethanol
  def comp EtOH_x as
    var EtOH_x: millimolar {init: 16.4514, pub: out};
    var difEtOH: flux {pub: in};
    var outEtOH: flux {pub: in};
    var time: minute {pub: in};
    ode(EtOH_x, time) = difEtOH-outEtOH;
  enddef;

  // title: Glyc
  // alternative: cytosolic glycogen
  def comp Glyc as
    var Glyc: millimolar {init: 4.196, pub: out};
    var difGlyc: flux {pub: in};
    var lpGlyc: flux {pub: in};
    var time: minute {pub: in};
    ode(Glyc, time) = lpGlyc-59{dimensionless}*difGlyc;
  enddef;

  // title: Glyc_x
  // alternative: extracellular glycogen
  def comp Glyc_x as
    var Glyc_x: millimolar {init: 1.68478, pub: out};
    var difGlyc: flux {pub: in};
    var outGlyc: flux {pub: in};
    var time: minute {pub: in};
    ode(Glyc_x, time) = difGlyc-outGlyc;
  enddef;

  // title: NADH
  // alternative: nicotinamide adenine dinucleotide
  def comp NADH as
    var NADH: millimolar {init: 0.33, pub: out};
    var GAPDH: flux {pub: in};
    var ADH: flux {pub: in};
    var lpGlyc: flux {pub: in};
    var time: minute {pub: in};
    ode(NADH, time) = GAPDH-(ADH+lpGlyc);
  enddef;

  // title: NAD
  // alternative: positive nicotinamide adenine dinucleotide
  def comp NAD as
    var NAD: millimolar {init: 0.65, pub: out};
    var GAPDH: flux {pub: in};
    var ADH: flux {pub: in};
    var lpGlyc: flux {pub: in};
    var time: minute {pub: in};
    ode(NAD, time) = ADH+lpGlyc-GAPDH;
  enddef;
  // The following components describe the reactions of the model.

  // title: inGlc
  // alternative: glucose mixed flow to extracellular medium
  def comp inGlc as
    var inGlc: flux {pub: out};
    var Glc_x_0: millimolar {pub: in};
    var Glc_x: millimolar {pub: in};
    var k0: first_order_rate_constant {pub: in};
    inGlc = k0*(Glc_x_0-Glc_x);
  enddef;

  // title: GlcTrans
  // alternative: glucose uptake
  def comp GlcTrans as
    var GlcTrans: flux {pub: out};
    var Glc_x: millimolar {pub: in};
    var Glc: millimolar {pub: in};
    var G6P: millimolar {pub: in};
    var K2_Glc: millimolar {init: 1.7};
    var K2_IG6P: millimolar {init: 1.2};
    var K2_IIG6P: millimolar {init: 7.2};
    var V_2m: flux {init: 1014.96};
    var P2: dimensionless {init: 1.0};
    var y_vol: dimensionless {pub: in};
    GlcTrans = V_2m/y_vol*(Glc_x/K2_Glc/(1.0{dimensionless}+Glc_x/K2_Glc+(P2*(Glc_x/K2_Glc)+1.0{dimensionless})/(P2*(Glc/K2_Glc)+1.0{dimensionless})*(1.0{dimensionless}+Glc/K2_Glc+G6P/K2_IG6P+Glc*G6P/(K2_Glc*K2_IIG6P))))-V_2m/y_vol*(Glc/K2_Glc/(1.0{dimensionless}+Glc/K2_Glc+(P2*(Glc/K2_Glc)+1.0{dimensionless})/(P2*(Glc_x/K2_Glc)+1.0{dimensionless})*(1.0{dimensionless}+Glc_x/K2_Glc)+G6P/K2_IG6P+Glc*G6P/(K2_Glc*K2_IIG6P)));
  enddef;

  // title: HK
  // alternative: hexokinase
  def comp HK as
    var HK: flux {pub: out};
    var Glc: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var K3_DGlc: millimolar {init: 0.37};
    var K3_Glc: millimolar {init: 0.0};
    var K3_ATP: millimolar {init: 0.1};
    var V_3m: flux {init: 51.7547};
    HK = V_3m*ATP*Glc/(K3_DGlc*K3_ATP+K3_Glc*ATP+K3_ATP*Glc+Glc*ATP);
  enddef;

  // title: PGI
  // alternative: phosphoglucoisomerase
  def comp PGI as
    var PGI: flux {pub: out};
    var G6P: millimolar {pub: in};
    var F6P: millimolar {pub: in};
    var V_4m: flux {init: 496.042};
    var K4_G6P: millimolar {init: 0.8};
    var K4_F6P: millimolar {init: 0.15};
    var K4_eq: dimensionless {init: 0.13};
    PGI = V_4m*G6P/(K4_G6P+G6P+K4_G6P/K4_F6P*F6P)-V_4m*(F6P/K4_eq)/(K4_G6P+G6P+K4_G6P/K4_F6P*F6P);
  enddef;

  // title: PFK
  // alternative: phosphofructokinase
  def comp PFK as
    var PFK: flux {pub: out};
    var F6P: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var AMP: millimolar {pub: in};
    var K5: millimolar2 {init: 0.021};
    var kappa5: dimensionless {init: 0.15};
    var V_5m: flux {init: 45.4327};
    PFK = V_5m*sqr(F6P)/(K5*(1.0{dimensionless}+kappa5*(ATP/AMP)*(ATP/AMP))+sqr(F6P));
  enddef;

  // title: ALD
  // alternative: aldolase
  def comp ALD as
    var ALD: flux {pub: out};
    var GAP: millimolar {pub: in};
    var DHAP: millimolar {pub: in};
    var FBP: millimolar {pub: in};
    var K6_eq: millimolar {init: 0.081};
    var K6_FBP: millimolar {init: 0.3};
    var K6_DHAP: millimolar {init: 2.0};
    var K6_GAP: millimolar {init: 4.0};
    var K6_IGAP: millimolar {init: 10.0};
    var V_6r: flux {init: 1.10391E4};
    var V_6f: flux {init: 2.20782E3};
    ALD = V_6f*FBP/(K6_FBP+FBP+GAP*K6_DHAP*V_6f/(K6_eq*V_6r)+DHAP*K6_GAP*V_6f/(K6_eq*V_6r)+FBP*GAP/K6_IGAP+GAP*DHAP*V_6f/(K6_eq*V_6r))-V_6f*(GAP*DHAP/K6_eq)/(K6_FBP+FBP+GAP*K6_DHAP*V_6f/(K6_eq*V_6r)+DHAP*K6_GAP*V_6f/(K6_eq*V_6r)+FBP*GAP/K6_IGAP+GAP*DHAP*V_6f/(K6_eq*V_6r));
  enddef;

  // title: TIM
  // alternative: triosephosphate isomerase
  def comp TIM as
    var TIM: flux {pub: out};
    var GAP: millimolar {pub: in};
    var DHAP: millimolar {pub: in};
    var K7_eq: dimensionless {init: 0.055};
    var K7_DHAP: millimolar {init: 1.23};
    var K7_GAP: millimolar {init: 1.27};
    var V_7m: flux {init: 1.16365E2};
    TIM = V_7m*DHAP/(K7_DHAP+DHAP+K7_DHAP/K7_GAP*GAP)-V_7m*(GAP/K7_eq)/(K7_DHAP+DHAP+K7_DHAP/K7_GAP*GAP);
  enddef;

  // title: GAPDH
  // alternative: glyceraldehyde 3-phosphate dehydrogenase
  def comp GAPDH as
    var GAPDH: flux {pub: out};
    var GAP: millimolar {pub: in};
    var NAD: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var BPG: millimolar {pub: in};
    var K8_NAD: millimolar {init: 0.1};
    var K8_NADH: millimolar {init: 0.06};
    var K8_GAP: millimolar {init: 0.6};
    var K8_BPG: millimolar {init: 0.01};
    var K8_eq: dimensionless {init: 0.0055};
    var V_8m: flux {init: 8.33858E2};
    GAPDH = V_8m*GAP*NAD/(K8_GAP*K8_NAD*(1.0{dimensionless}+GAP/K8_GAP+BPG/K8_BPG)*(1.0{dimensionless}+NAD/K8_NAD+NADH/K8_NADH))-V_8m*(BPG*NADH/K8_eq)/(K8_GAP*K8_NAD*(1.0{dimensionless}+GAP/K8_GAP+BPG/K8_BPG)*(1.0{dimensionless}+NAD/K8_NAD+NADH/K8_NADH));
  enddef;

  // title: lpPEP
  // alternative: phosphoenolpyruvate synthesis
  def comp lpPEP as
    var lpPEP: flux {pub: out};
    var PEP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var BPG: millimolar {pub: in};
    var k9f: second_order_rate_constant {init: 4.43866E5};
    var k9r: second_order_rate_constant {init: 1.52862E3};
    lpPEP = k9f*BPG*ADP-k9r*PEP*ATP;
  enddef;

  // title: PK
  // alternative: pyruvate kinase
  def comp PK as
    var PK: flux {pub: out};
    var PEP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var K10_PEP: millimolar {init: 0.2};
    var K10_ADP: millimolar {init: 0.17};
    var V_10m: flux {init: 3.43096E2};
    PK = V_10m*ADP*PEP/((K10_PEP+PEP)*(K10_ADP+ADP));
  enddef;

  // title: PDC
  // alternative: pyruvate decarboxylase
  def comp PDC as
    var PDC: flux {pub: out};
    var Pyr: millimolar {pub: in};
    var K11: millimolar {init: 0.3};
    var V_11m: flux {init: 5.31328E1};
    PDC = V_11m*Pyr/(K11+Pyr);
  enddef;

  // title: ADH
  // alternative: alcohol dehydrogenase
  def comp ADH as
    var ADH: flux {pub: out};
    var NADH: millimolar {pub: in};
    var ACA: millimolar {pub: in};
    var K12_NADH: millimolar {init: 0.1};
    var K12_ACA: millimolar {init: 0.71};
    var V_12m: flux {init: 8.98023E1};
    ADH = V_12m*ACA*NADH/((K12_NADH+NADH)*(K12_ACA+ACA));
  enddef;

  // title: outEtOH
  // alternative: ethanol flow
  def comp outEtOH as
    var outEtOH: flux {pub: out};
    var EtOH_x: millimolar {pub: in};
    var k0: first_order_rate_constant {pub: in};
    outEtOH = k0*EtOH_x;
  enddef;

  // title: difEtOH
  // alternative: ethanol out
  def comp difEtOH as
    var difEtOH: flux {pub: out};
    var k13: first_order_rate_constant {init: 16.72};
    var EtOH_x: millimolar {pub: in};
    var EtOH: millimolar {pub: in};
    var y_vol: dimensionless {pub: in};
    difEtOH = k13/y_vol*(EtOH-EtOH_x);
  enddef;

  // title: lpGlyc
  // alternative: glycerol synthesis
  def comp lpGlyc as
    var lpGlyc: flux {pub: out};
    var NAD: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var DHAP: millimolar {pub: in};
    var K15_NADH: millimolar {init: 0.13};
    var K15_INADH: millimolar {init: 0.034};
    var K15_INAD: millimolar {init: 0.13};
    var K15_DHAP: millimolar {init: 25.0};
    var V_15m: flux {init: 8.14797E1};
    lpGlyc = V_15m*DHAP/(K15_DHAP*(1.0{dimensionless}+K15_INADH/NADH*(1.0{dimensionless}+NAD/K15_INAD))+DHAP*(1.0{dimensionless}+K15_NADH/NADH*(1.0{dimensionless}+NAD/K15_INAD)));
  enddef;

  // title: outGlyc
  // alternative: glycerol flow
  def comp outGlyc as
    var outGlyc: flux {pub: out};
    var Glyc_x: millimolar {pub: in};
    var k0: first_order_rate_constant {pub: in};
    outGlyc = k0*Glyc_x;
  enddef;

  // title: difGlyc
  // alternative: glycerol out
  def comp difGlyc as
    var difGlyc: flux {pub: out};
    var k16: first_order_rate_constant {init: 1.9};
    var Glyc_x: millimolar {pub: in};
    var Glyc: millimolar {pub: in};
    var y_vol: dimensionless {pub: in};
    difGlyc = k16/y_vol*(Glyc-Glyc_x);
  enddef;

  // title: outACA
  // alternative: acetaldehyde flow
  def comp outACA as
    var outACA: flux {pub: out};
    var ACA_x: millimolar {pub: in};
    var k0: first_order_rate_constant {pub: in};
    outACA = k0*ACA_x;
  enddef;

  // title: difACA
  // alternative: acetaldehyde out
  def comp difACA as
    var difACA: flux {pub: out};
    var ACA: millimolar {pub: in};
    var ACA_x: millimolar {pub: in};
    var y_vol: dimensionless {pub: in};
    var k18: first_order_rate_constant {init: 24.7};
    difACA = k18/y_vol*(ACA-ACA_x);
  enddef;

  // title: lacto
  // alternative: cyanide-acetaldehyde flow
  def comp lacto as
    var lacto: flux {pub: out};
    var ACA_x: millimolar {pub: in};
    var CN_x: millimolar {pub: in};
    var k20: second_order_rate_constant {init: 2.83828E-3};
    lacto = k20*ACA_x*CN_x;
  enddef;

  // title: inCN
  // alternative: cyanide flow
  def comp inCN as
    var inCN: flux {pub: out};
    var CN_x_0: millimolar {pub: in};
    var CN_x: millimolar {pub: in};
    var k0: first_order_rate_constant {pub: in};
    inCN = k0*(CN_x_0-CN_x);
  enddef;

  // title: storage
  // alternative: storage
  def comp storage as
    var storage: flux {pub: out};
    var ATP: millimolar {pub: in};
    var G6P: millimolar {pub: in};
    var k22: second_order_rate_constant {init: 2.25932};
    storage = k22*ATP*G6P;
  enddef;

  // title: consum
  // alternative: ATP consumption
  def comp consum as
    var consum: flux {pub: out};
    var ATP: millimolar {pub: in};
    var k23: first_order_rate_constant {init: 3.20760};
    consum = k23*ATP;
  enddef;

  // title: AK
  // alternative: adenylate kinase
  def comp AK as
    var AK: flux {pub: out};
    var ATP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var AMP: millimolar {pub: in};
    var k24f: second_order_rate_constant {init: 4.32900E2};
    var k24r: second_order_rate_constant {init: 1.33333E2};
    AK = k24f*AMP*ATP-k24r*sqr(ADP);
  enddef;

  def comp model_parameters as
    var y_vol: dimensionless {init: 59.0, pub: out};
    var k0: first_order_rate_constant {init: 0.048, pub: out};
  enddef;
  def map between Glc_x_0 and inGlc for
    vars Glc_x_0 and Glc_x_0;
  enddef;
  def map between Glc_x and inGlc for
    vars Glc_x and Glc_x;
    vars inGlc and inGlc;
  enddef;
  def map between model_parameters and inGlc for
    vars k0 and k0;
  enddef;
  def map between Glc_x and GlcTrans for
    vars Glc_x and Glc_x;
    vars GlcTrans and GlcTrans;
  enddef;
  def map between Glc and GlcTrans for
    vars Glc and Glc;
    vars GlcTrans and GlcTrans;
  enddef;
  def map between model_parameters and GlcTrans for
    vars y_vol and y_vol;
  enddef;
  def map between Glc and HK for
    vars Glc and Glc;
    vars HK and HK;
  enddef;
  def map between G6P and HK for
    vars HK and HK;
  enddef;
  def map between G6P and PGI for
    vars G6P and G6P;
    vars PGI and PGI;
  enddef;
  def map between G6P and GlcTrans for
    vars G6P and G6P;
  enddef;
  def map between G6P and storage for
    vars G6P and G6P;
    vars storage and storage;
  enddef;
  def map between F6P and PGI for
    vars F6P and F6P;
    vars PGI and PGI;
  enddef;
  def map between F6P and PFK for
    vars F6P and F6P;
    vars PFK and PFK;
  enddef;
  def map between FBP and PFK for
    vars PFK and PFK;
  enddef;
  def map between FBP and ALD for
    vars FBP and FBP;
    vars ALD and ALD;
  enddef;
  def map between GAP and ALD for
    vars GAP and GAP;
    vars ALD and ALD;
  enddef;
  def map between GAP and TIM for
    vars GAP and GAP;
    vars TIM and TIM;
  enddef;
  def map between GAP and GAPDH for
    vars GAP and GAP;
    vars GAPDH and GAPDH;
  enddef;
  def map between DHAP and ALD for
    vars DHAP and DHAP;
    vars ALD and ALD;
  enddef;
  def map between DHAP and TIM for
    vars DHAP and DHAP;
    vars TIM and TIM;
  enddef;
  def map between DHAP and lpGlyc for
    vars DHAP and DHAP;
    vars lpGlyc and lpGlyc;
  enddef;
  def map between Glyc and lpGlyc for
    vars lpGlyc and lpGlyc;
  enddef;
  def map between Glyc_x and outGlyc for
    vars Glyc_x and Glyc_x;
    vars outGlyc and outGlyc;
  enddef;
  def map between model_parameters and outGlyc for
    vars k0 and k0;
  enddef;
  def map between Glyc_x and difGlyc for
    vars Glyc_x and Glyc_x;
    vars difGlyc and difGlyc;
  enddef;
  def map between Glyc and difGlyc for
    vars Glyc and Glyc;
    vars difGlyc and difGlyc;
  enddef;
  def map between model_parameters and difGlyc for
    vars y_vol and y_vol;
  enddef;
  def map between BPG and GAPDH for
    vars GAPDH and GAPDH;
    vars BPG and BPG;
  enddef;
  def map between BPG and lpPEP for
    vars lpPEP and lpPEP;
    vars BPG and BPG;
  enddef;
  def map between PEP and lpPEP for
    vars PEP and PEP;
    vars lpPEP and lpPEP;
  enddef;
  def map between PEP and PK for
    vars PEP and PEP;
    vars PK and PK;
  enddef;
  def map between Pyr and PK for
    vars PK and PK;
  enddef;
  def map between Pyr and PDC for
    vars Pyr and Pyr;
    vars PDC and PDC;
  enddef;
  def map between ACA and ADH for
    vars ACA and ACA;
    vars ADH and ADH;
  enddef;
  def map between ACA and PDC for
    vars PDC and PDC;
  enddef;
  def map between ACA_x and outACA for
    vars ACA_x and ACA_x;
    vars outACA and outACA;
  enddef;
  def map between model_parameters and outACA for
    vars k0 and k0;
  enddef;
  def map between ACA_x and difACA for
    vars ACA_x and ACA_x;
    vars difACA and difACA;
  enddef;
  def map between ACA and difACA for
    vars ACA and ACA;
    vars difACA and difACA;
  enddef;
  def map between model_parameters and difACA for
    vars y_vol and y_vol;
  enddef;
  def map between EtOH_x and outEtOH for
    vars EtOH_x and EtOH_x;
    vars outEtOH and outEtOH;
  enddef;
  def map between model_parameters and outEtOH for
    vars k0 and k0;
  enddef;
  def map between EtOH and difEtOH for
    vars EtOH and EtOH;
    vars difEtOH and difEtOH;
  enddef;
  def map between EtOH_x and difEtOH for
    vars EtOH_x and EtOH_x;
    vars difEtOH and difEtOH;
  enddef;
  def map between model_parameters and difEtOH for
    vars y_vol and y_vol;
  enddef;
  def map between CN_x_0 and inCN for
    vars CN_x_0 and CN_x_0;
  enddef;
  def map between CN_x and inCN for
    vars CN_x and CN_x;
    vars inCN and inCN;
  enddef;
  def map between model_parameters and inCN for
    vars k0 and k0;
  enddef;
  def map between CN_x and lacto for
    vars CN_x and CN_x;
    vars lacto and lacto;
  enddef;
  def map between ACA_x and lacto for
    vars ACA_x and ACA_x;
    vars lacto and lacto;
  enddef;
  def map between ATP and HK for
    vars ATP and ATP;
    vars HK and HK;
  enddef;
  def map between ADP and HK for
    vars HK and HK;
  enddef;
  def map between ADP and PFK for
    vars PFK and PFK;
  enddef;
  def map between ATP and storage for
    vars ATP and ATP;
    vars storage and storage;
  enddef;
  def map between ADP and storage for
    vars storage and storage;
  enddef;
  def map between ATP and PFK for
    vars ATP and ATP;
    vars PFK and PFK;
  enddef;
  def map between AMP and PFK for
    vars AMP and AMP;
  enddef;
  def map between ATP and PK for
    vars PK and PK;
  enddef;
  def map between ADP and PK for
    vars ADP and ADP;
    vars PK and PK;
  enddef;
  def map between ATP and lpPEP for
    vars ATP and ATP;
    vars lpPEP and lpPEP;
  enddef;
  def map between ADP and lpPEP for
    vars ADP and ADP;
    vars lpPEP and lpPEP;
  enddef;
  def map between ATP and AK for
    vars ATP and ATP;
    vars AK and AK;
  enddef;
  def map between ADP and AK for
    vars ADP and ADP;
    vars AK and AK;
  enddef;
  def map between AMP and AK for
    vars AMP and AMP;
    vars AK and AK;
  enddef;
  def map between ATP and consum for
    vars ATP and ATP;
    vars consum and consum;
  enddef;
  def map between ADP and consum for
    vars consum and consum;
  enddef;
  def map between NAD and GAPDH for
    vars NAD and NAD;
    vars GAPDH and GAPDH;
  enddef;
  def map between NADH and GAPDH for
    vars NADH and NADH;
    vars GAPDH and GAPDH;
  enddef;
  def map between NAD and ADH for
    vars ADH and ADH;
  enddef;
  def map between EtOH and ADH for
    vars ADH and ADH;
  enddef;
  def map between NADH and ADH for
    vars NADH and NADH;
    vars ADH and ADH;
  enddef;
  def map between NAD and lpGlyc for
    vars NAD and NAD;
    vars lpGlyc and lpGlyc;
  enddef;
  def map between NADH and lpGlyc for
    vars NADH and NADH;
    vars lpGlyc and lpGlyc;
  enddef;
  def map between Glc_x and environment for
    vars time and time;
  enddef;
  def map between Glc and environment for
    vars time and time;
  enddef;
  def map between G6P and environment for
    vars time and time;
  enddef;
  def map between F6P and environment for
    vars time and time;
  enddef;
  def map between FBP and environment for
    vars time and time;
  enddef;
  def map between GAP and environment for
    vars time and time;
  enddef;
  def map between DHAP and environment for
    vars time and time;
  enddef;
  def map between Glyc and environment for
    vars time and time;
  enddef;
  def map between Glyc_x and environment for
    vars time and time;
  enddef;
  def map between BPG and environment for
    vars time and time;
  enddef;
  def map between PEP and environment for
    vars time and time;
  enddef;
  def map between Pyr and environment for
    vars time and time;
  enddef;
  def map between ACA and environment for
    vars time and time;
  enddef;
  def map between ACA_x and environment for
    vars time and time;
  enddef;
  def map between ATP and environment for
    vars time and time;
  enddef;
  def map between ADP and environment for
    vars time and time;
  enddef;
  def map between AMP and environment for
    vars time and time;
  enddef;
  def map between CN_x and environment for
    vars time and time;
  enddef;
  def map between EtOH and environment for
    vars time and time;
  enddef;
  def map between EtOH_x and environment for
    vars time and time;
  enddef;
  def map between NAD and environment for
    vars time and time;
  enddef;
  def map between NADH and environment for
    vars time and time;
  enddef;
enddef;
