//   FILE :  oxidative_phosphorylation_2001_version02.xml
//
// CREATED :  31st May 2007
//
// LAST MODIFIED : 31st May 2007
//
// AUTHOR :  Catherine Lloyd
//           Department of Engineering Science
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.1 Specification.
//
// DESCRIPTION :  This file contains a CellML description of oxidative
// phosphorylation based on Korzeniewski and Froncisz's mathematical model (1991).
// This model was slightly altered in a subsequent paper (1996) and I have
// incorporated some of these changes.
//
// CHANGES:
// publisher: The University of Auckland, Auckland Bioengineering Institute
// created: W3CDTF 2007-05-31T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2008-09-02T14:26:09+12:00; Deleted an extraneous connection element randomly sitting within a component element. Model still overconstrained.; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2008-09-02T14:12:01+12:00; Fixed error mentioned in https://tracker.physiomeproject.org/show_bug.cgi?id=219 Model still has invalid connection to be fixed.; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2007-06-05T09:48:29+12:00; The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics. This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology. The model does not run in the PCEnv simulator because the model is overconstrained. But I can't work out which equation(s) or initial value(s) to remove. I suspect PCEnv is calculating the value of "u" itself from early equations.; Given Catherine; Family Lloyd; Other May
// title: A dynamic model of oxidative phosphorylation
// bio_entity: Skeletal Myocyte
// comment: FN Catherine Lloyd; This is the CellML description of Korzeniewski and Froncisz's mathematical model of oxidative phosphorylation (1991). In 1996 they further modified and developed the model, making it specific to liver hepatocytes. Most recent changes (2001) have extended the model and have made it specific to mammalian skeletal muscle. These changes have been incorporated into the CellML description. The model distinguishes three modes of the work of cells. The rate equations for some reactions are slightly altered, dependent on the mode of work. This CellML description concentrates on mode 1 only, where; 1) Beta-oxidation of fatty acids as the source of reducing equivalents, fatty acids as a respiratory substrate, no additional ATP supply (glycolysis), only "basal" ATP consumption (protein synthesis, ion transport).
// reference: subject_type keyword; mammalian; skeletal muscle; myocyte; metabolism; oxidative phosphorylation
// reference: Pubmed_id 11527576; Given Bernard; Family Korzeniewski; Given Jerzy; Family Zoladz; Other A; title A model of oxidative phosphorylation in mammaliam skeletal muscle; volume 92; first_page 17; title Biophysical Chemistry; W3CDTF 2001-08-30; last_page 34
// species: Mammalia
def model korzeniewski_zoladz_2001 as
  // A model of oxidative phosphorylation in mammalian skeletal muscle
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This model is valid CellML but it will not run in OpenCell or COR and it requires much more curation.
  //
  // Model Structure
  //
  // ABSTRACT: A dynamic computer model of oxidative phosphorylation in oxidative mammalian skeletal muscle was developed. The previously published model of oxidative phosphorylation in isolated skeletal muscle mitochondria was extended by incorporation of the creatine kinase system (creatine kinase plus phosphocreatine/creatine pair), cytosolic proton production/consumption system (proton production/consumption by the creatine kinase-catalysed reaction, efflux/influx of protons), physiological size of the adenine nucleotide pool and some additional minor changes. Theoretical studies performed by means of the extended model demonstrated that the CK system, which allows for large changes in P(i) in relation to isolated mitochondria system, has no significant influence on the kinetic properties of oxidative phosphorylation, as inorganic phosphate only slightly modifies the relationship between the respiration rate and [ADP]. Computer simulations also suggested that the second-order dependence of oxidative phosphorylation on [ADP] proposed in the literature refers only to the ATP synthesis flux, but not to the oxygen consumption flux (the difference between these two fluxes being due to the proton leak). Next, time courses of changes in fluxes and metabolite concentrations during transition between different steady-states were simulated. The model suggests, in accordance with previous theoretical predictions, that activation of oxidative phosphorylation by an increase in [ADP] can (roughly) explain the behaviour of the system only at low work intensities, while at higher work intensities parallel activation of different steps of oxidative phosphorylation is involved.
  //
  // The original paper reference is cited below:
  //
  // A model of oxidative phosphorylation in mammalian skeletal muscle, Bernard Korzeniewski and Jerzy A. Zoladz, 2001, Biophysical Chemistry, 92, 17-34. PubMed ID: 11527576 (http://www.ncbi.nlm.nih.gov/pubmed/11527576)
  //
  // the conventional rendering of oxidative phosphorylation
  //
  // A schematic diagram of the oxidative phosphorylation pathway.
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit minute as
    unit second {mult: 60.0};
  enddef;
  def unit flux as
    unit micromolar;
    unit minute {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit micromolar {expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit third_order_rate_constant as
    unit micromolar {expo: -2};
    unit minute {expo: -1};
  enddef;
  def unit micromolar_per_millivolt_minute as
    unit micromolar;
    unit millivolt {expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit proton as base unit;
  def unit pH_unit as base unit;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit molar_proton_per_pH_unit as
    unit molar;
    unit proton;
    unit pH_unit {expo: -1};
  enddef;
  def unit kilojoule_per_mole_kelvin as
    unit joule {pref: kilo};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit kilojoule_per_mole_millivolt as
    unit joule {pref: kilo};
    unit mole {expo: -1};
    unit millivolt {expo: -1};
  enddef;
  def unit kilojoule_per_mole as
    unit joule {pref: kilo};
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp cell as
    var R_cm: dimensionless {pub: out, init: 15.0};
    var R: kilojoule_per_mole_kelvin {pub: out, init: 0.0083};
    var T: kelvin {pub: out, init: 289.0};
    var F: kilojoule_per_mole_millivolt {pub: out, init: 0.0965};
    var S: kilojoule_per_mole {pub: out};
    var Z: millivolt {pub: out};
    var electric_potential: millivolt {pub: out};
    var protonmotive_force: millivolt {pub: out, init: 190.0};
    var ex_membrane_potential: millivolt {pub: out};
    var in_membrane_potential: millivolt {pub: out};
    var c_buffi: molar_proton_per_pH_unit {init: 0.022};
    var c_buffe: molar_proton_per_pH_unit {init: 0.025};
    var pH_e: dimensionless {pub: out};
    var pH_i: dimensionless {pub: out};
    var pKa: dimensionless {pub: out, init: 6.8};
    var He: micromolar {pub: in};
    var Hi: micromolar {pub: in};
    var delta_pH: dimensionless;
    var dpH: dimensionless {init: 0.001};
    var C0_i: molar_proton_per_pH_unit;
    var C0_e: molar_proton_per_pH_unit;
    var r_buffi: dimensionless {pub: out};
    var r_buffe: dimensionless {pub: out};
    var BN: dimensionless {pub: out, init: 5.0};
    var u: dimensionless {pub: out};
    // <math xmlns="http://www.w3.org/1998/Math/MathML" id="1a">
    //      <apply>
    //        <eq/>
    //        <ci>protonmotive_force</ci>
    //        <apply>
    //          <divide/>
    //          <cn cellml:units="dimensionless">1.0</cn>
    //          <apply>
    //            <times/>
    //            <apply>
    //              <minus/>
    //              <cn cellml:units="dimensionless">1.0</cn>
    //              <ci>u</ci>
    //            </apply>
    //            <ci>delta_pH</ci>
    //          </apply>
    //        </apply>
    //      </apply>
    //    </math>
    electric_potential = -(protonmotive_force-delta_pH);
    in_membrane_potential = 0.65{dimensionless}*electric_potential;
    ex_membrane_potential = -0.35{dimensionless}*electric_potential;
    u = electric_potential/protonmotive_force;
    C0_i = (pow(10.0{dimensionless}, -pH_i)-pow(10.0{dimensionless}, -pH_i-dpH))/dpH;
    r_buffi = c_buffi/C0_i;
    C0_e = (pow(10.0{dimensionless}, -pH_e)-pow(10.0{dimensionless}, -pH_e-dpH))/dpH;
    r_buffe = c_buffe/C0_e;
    S = 2.303{dimensionless}*R*T;
    Z = 2.303{dimensionless}*R*(T/F);
    pH_e = -log(He/1000000.0{micromolar});
    pH_i = -log(Hi/1000000.0{micromolar});
    delta_pH = Z*(pH_i-pH_e);
  enddef;

  def comp redox_potentials as
    var EmN: millivolt {pub: out};
    var EmU: millivolt {pub: out};
    var Emc: millivolt {pub: out};
    var Ema: millivolt {pub: out};
    var EmN0: millivolt {init: -320.0};
    var EmU0: millivolt {init: 85.0};
    var Emc0: millivolt {init: 250.0};
    var Z: millivolt {pub: in};
    var NAD: micromolar {pub: in};
    var NADH: micromolar {pub: in};
    var UQ: micromolar {pub: in};
    var UQH2: micromolar {pub: in};
    var c_2: micromolar {pub: in};
    var c_3: micromolar {pub: in};
    var protonmotive_force: millivolt {pub: in};
    var u: dimensionless {pub: in};
    EmN = EmN0+Z/2.0{millivolt}*log(NAD/NADH);
    EmU = EmU0+Z/2.0{millivolt}*log(UQ/UQH2);
    Emc = Emc0+Z*log(c_3/c_2);
    Ema = Emc+protonmotive_force*((2.0{dimensionless}+2.0{dimensionless}*u)/2.0{dimensionless});
  enddef;

  // alternative: oxidised nicotinamide adenine dinucleotide
  // title: NAD
  def comp NAD as
    var NAD: micromolar {pub: out};
    var Nt: micromolar {init: 2970.0};
    var NADH: micromolar {pub: in};
    NAD = Nt-NADH;
  enddef;

  // alternative: reduced nicotinamide adenine dinucleotide
  // title: NADH
  def comp NADH as
    var NADH: micromolar {pub: out, init: 500.0};
    var BN: dimensionless {pub: in};
    var R_cm: dimensionless {pub: in};
    var vDH: flux {pub: in};
    var vC1: flux {pub: in};
    var time: second {pub: in};
    ode(NADH, time) = (vDH-vC1)*(R_cm/BN);
  enddef;

  // alternative: oxygen
  // title: O2
  def comp O2 as
    var O2: micromolar {pub: out, init: 1.00};
    var vC4: flux {pub: in};
    var time: second {pub: in};
    ode(O2, time) = -vC4;
  enddef;

  // alternative: internal protons
  // title: Hi
  def comp Hi as
    var Hi: micromolar {pub: out, init: 1.00};
    var r_buffi: dimensionless {pub: in};
    var u: dimensionless {pub: in};
    var nA: dimensionless {pub: in};
    var vC4: flux {pub: in};
    var vC1: flux {pub: in};
    var vC3: flux {pub: in};
    var vSN: flux {pub: in};
    var vEX: flux {pub: in};
    var vPI: flux {pub: in};
    var vLK: flux {pub: in};
    var R_cm: dimensionless {pub: in};
    var time: second {pub: in};
    ode(Hi, time) = ((4.0{dimensionless}-2.0{dimensionless}*u)*vC3+4.0{dimensionless}*vC1-(2.0{dimensionless}*(2.0{dimensionless}+2.0{dimensionless}*u)*vC4+nA*vSN+u*vEX+(1.0{dimensionless}-u)*vPI+vLK))*R_cm/r_buffi;
  enddef;

  // alternative: external protons
  // title: He
  def comp He as
    var He: micromolar {pub: out, init: 1.00};
    var r_buffe: dimensionless {pub: in};
    var u: dimensionless {pub: in};
    var nA: dimensionless {pub: in};
    var vC4: flux {pub: in};
    var vC1: flux {pub: in};
    var vC3: flux {pub: in};
    var vCK: flux {pub: in};
    var vEFF: flux {pub: in};
    var vSN: flux {pub: in};
    var vEX: flux {pub: in};
    var vPI: flux {pub: in};
    var vLK: flux {pub: in};
    var time: second {pub: in};
    ode(He, time) = (2.0{dimensionless}*(2.0{dimensionless}+2.0{dimensionless}*u)*vC4+(4.0{dimensionless}-2.0{dimensionless}*u)*vC3+4.0{dimensionless}*vC1-(nA*vSN+u*vEX+(1.0{dimensionless}-u)*vPI+vLK+vCK+vEFF))/r_buffe;
  enddef;

  // alternative: internal magnesium-complexed adenosine diphosphate
  // title: ADP_mi
  def comp ADP_mi as
    var ADP_mi: micromolar {pub: out};
    var ADP_ti: micromolar {pub: in};
    var ADP_fi: micromolar {pub: in};
    ADP_mi = ADP_ti-ADP_fi;
  enddef;

  // alternative: free internal adenosine diphosphate
  // title: ADP_fi
  def comp ADP_fi as
    var ADP_fi: micromolar {pub: out};
    var kDDi: micromolar {init: 282};
    var ADP_ti: micromolar {pub: in};
    var Mg_fi: micromolar {pub: in};
    var time: second {pub: in};
    ADP_fi = ADP_ti/(1.0{dimensionless}+Mg_fi/kDDi);
  enddef;

  // alternative: total internal adenosine diphosphate
  // title: ADP_ti
  def comp ADP_ti as
    var ADP_ti: micromolar {pub: out};
    var Ai_SUM: micromolar {init: 16260.0};
    var ATP_ti: micromolar {pub: in};
    ADP_ti = Ai_SUM-ATP_ti;
  enddef;

  // alternative: internal magnesium-complexed adenosine triphosphate
  // title: ATP_mi
  def comp ATP_mi as
    var ATP_mi: micromolar {pub: out};
    var ATP_ti: micromolar {pub: in};
    var ATP_fi: micromolar {pub: in};
    ATP_mi = ATP_ti-ATP_fi;
  enddef;

  // alternative: free internal adenosine triphosphate
  // title: ATP_fi
  def comp ATP_fi as
    var ATP_fi: micromolar {pub: out};
    var kDTi: micromolar {init: 17};
    var ATP_ti: micromolar {pub: in};
    var Mg_fi: micromolar {pub: in};
    ATP_fi = ATP_ti/(1.0{dimensionless}+Mg_fi/kDTi);
  enddef;

  // alternative: total internal adenosine triphosphate
  // title: ATP_ti
  def comp ATP_ti as
    var ATP_ti: micromolar {pub: out, init: 1.00};
    var R_cm: dimensionless {pub: in};
    var vSN: flux {pub: in};
    var vEX: flux {pub: in};
    var time: second {pub: in};
    ode(ATP_ti, time) = (vSN-vEX)*R_cm;
  enddef;

  // alternative: external magnesium-complexed adenosine diphosphate
  // title: ADP_me
  def comp ADP_me as
    var ADP_me: micromolar {pub: out};
    var ADP_te: micromolar {pub: in};
    var ADP_fe: micromolar {pub: in};
    ADP_me = ADP_te-ADP_fe;
  enddef;

  // alternative: free external adenosine diphosphate
  // title: ADP_fe
  def comp ADP_fe as
    var ADP_fe: micromolar {pub: out};
    var kDDe: micromolar {init: 347};
    var ADP_te: micromolar {pub: in};
    var Mg_fe: micromolar {pub: in};
    ADP_fe = ADP_te/(1.0{dimensionless}+Mg_fe/kDDe);
  enddef;

  // alternative: total external adenosine diphosphate
  // title: ADP_te
  def comp ADP_te as
    var ADP_te: micromolar {pub: out, init: 1.00};
    var vUT: flux {pub: in};
    var vEX: flux {pub: in};
    var vAK: flux {pub: in};
    var vCK: flux {pub: in};
    var time: second {pub: in};
    ode(ADP_te, time) = vUT-(vEX+2.0{dimensionless}*vAK+vCK);
  enddef;

  // alternative: external magnesium-complexed adenosine triphosphate
  // title: ATP_me
  def comp ATP_me as
    var ATP_me: micromolar {pub: out};
    var ATP_te: micromolar {pub: in};
    var ATP_fe: micromolar {pub: in};
    ATP_me = ATP_te-ATP_fe;
  enddef;

  // alternative: free external adenosine triphosphate
  // title: ATP_fe
  def comp ATP_fe as
    var ATP_fe: micromolar {pub: out};
    var kDTe: micromolar {init: 24};
    var ATP_te: micromolar {pub: in};
    var Mg_fe: micromolar {pub: in};
    ATP_fe = ATP_te/(1.0{dimensionless}+Mg_fe/kDTe);
  enddef;

  // alternative: total external adenosine triphosphate
  // title: ATP_te
  def comp ATP_te as
    var ATP_te: micromolar {pub: out, init: 1.00};
    var vUT: flux {pub: in};
    var vEX: flux {pub: in};
    var vAK: flux {pub: in};
    var vCK: flux {pub: in};
    var time: second {pub: in};
    ode(ATP_te, time) = vEX+vAK+vCK-vUT;
  enddef;

  // alternative: free external adenosine monophosphate
  // title: AMP_fe
  def comp AMP_e as
    var AMP_e: micromolar {pub: out};
    var Ae_SUM: micromolar {init: 1600.2};
    var ATP_te: micromolar {pub: in};
    var ADP_te: micromolar {pub: in};
    AMP_e = Ae_SUM-(ATP_te+ADP_te);
  enddef;

  // alternative: creatine
  // title: Cr
  def comp Cr as
    var Cr: micromolar {pub: out};
    var C_SUM: micromolar {init: 35000.0};
    var PCr: micromolar {pub: in};
    Cr = C_SUM-PCr;
  enddef;

  // alternative: phosphocreatine
  // title: PCr
  def comp PCr as
    var PCr: micromolar {pub: out, init: 1.00};
    var vCK: flux {pub: in};
    var time: second {pub: in};
    ode(PCr, time) = -vCK;
  enddef;

  // alternative: internal monovalent inorganic phosphate
  // title: Pi_ji
  def comp Pi_ji as
    var Pi_ji: micromolar {pub: out};
    var Pi_ti: micromolar {pub: in};
    var pH_i: dimensionless {pub: in};
    var pKa: dimensionless {pub: in};
    var time: second {pub: in};
    Pi_ji = Pi_ti/(1.0{dimensionless}+pow(10.0{dimensionless}, pH_i-pKa));
  enddef;

  // alternative: external monovalent inorganic phosphate
  // title: Pi_je
  def comp Pi_je as
    var Pi_je: micromolar {pub: out};
    var Pi_te: micromolar {pub: in};
    var pH_e: dimensionless {pub: in};
    var pKa: dimensionless {pub: in};
    var time: second {pub: in};
    Pi_je = Pi_te/(1.0{dimensionless}+pow(10.0{dimensionless}, pH_e-pKa));
  enddef;

  // alternative: total internal inorganic phosphate
  // title: Pi_ti
  def comp Pi_ti as
    var Pi_ti: micromolar {pub: out, init: 1.00};
    var vPI: flux {pub: in};
    var vSN: flux {pub: in};
    var R_cm: dimensionless {pub: in};
    var time: second {pub: in};
    ode(Pi_ti, time) = (vPI-vSN)*R_cm;
  enddef;

  // alternative: total external inorganic phosphate
  // title: Pi_te
  def comp Pi_te as
    var Pi_te: micromolar {pub: out, init: 1.00};
    var vUT: flux {pub: in};
    var vPI: flux {pub: in};
    var time: second {pub: in};
    ode(Pi_te, time) = vUT-vPI;
  enddef;

  // alternative: free external magnesium
  // title: Mg_fe
  def comp Mg_fe as
    var Mg_fe: micromolar {pub: out, init: 4000.0};
  enddef;

  // alternative: free internal magnesium
  // title: Mg_fi
  def comp Mg_fi as
    var Mg_fi: micromolar {pub: out, init: 380.0};
  enddef;

  // alternative: total phosphate pool
  // title: P_SUM
  def comp P_SUM as
    var P_SUM: micromolar {pub: out};
    var Pi_ti: micromolar {pub: in};
    var Pi_te: micromolar {pub: in};
    var PCr: micromolar {pub: in};
    var ATP_te: micromolar {pub: in};
    var ADP_te: micromolar {pub: in};
    var AMP_e: micromolar {pub: in};
    var ATP_ti: micromolar {pub: in};
    var ADP_ti: micromolar {pub: in};
    var R_cm: dimensionless {pub: in};
    var time: second {pub: in};
    P_SUM = PCr+ATP_te*3.0{dimensionless}+ADP_te*2.0{dimensionless}+AMP_e+Pi_te+(ATP_ti*3.0{dimensionless}+ADP_ti*2.0{dimensionless}+Pi_ti)/R_cm;
  enddef;

  // alternative: reduced cytochrome C
  // title: c_2
  def comp c_2 as
    var c_2: micromolar {pub: out, init: 1.00};
    var R_cm: dimensionless {pub: in};
    var vC3: flux {pub: in};
    var vC4: flux {pub: in};
    var time: second {pub: in};
    ode(c_2, time) = (vC3+vC4*2.0{dimensionless})*R_cm*2.0{dimensionless};
  enddef;

  // alternative: oxidised cytochrome C
  // title: c_3
  def comp c_3 as
    var c_3: micromolar {pub: out};
    var ct: micromolar {init: 270.0};
    var c_2: micromolar {pub: in};
    c_3 = ct-c_2;
  enddef;

  // alternative: oxidised ubiquinone
  // title: UQ
  def comp UQ as
    var UQ: micromolar {pub: out};
    var Ut: micromolar {init: 1350.0};
    var UQH2: micromolar {pub: in};
    UQ = Ut-UQH2;
  enddef;

  // alternative: reduced ubiquinone
  // title: UQH2
  def comp UQH2 as
    var UQH2: micromolar {pub: out, init: 1.00};
    var R_cm: dimensionless {pub: in};
    var vC1: flux {pub: in};
    var vC3: flux {pub: in};
    var time: second {pub: in};
    ode(UQH2, time) = R_cm*(vC1-vC3);
  enddef;

  // alternative: reduced cytochrome a3
  // title: a_2
  def comp a_2 as
    var a_2: micromolar {pub: out, init: 1.00};
    var A3_2: dimensionless;
    var Ema0: millivolt {init: 540.0};
    var at: micromolar {pub: out, init: 135.0};
    var Ema: millivolt {pub: in};
    var Z: millivolt {pub: in};
    var time: second {pub: in};
    ode(a_2, time) = at/(1.0{dimensionless}+A3_2);
    A3_2 = pow(10.0{dimensionless}, (Ema-Ema0)/Z);
  enddef;

  // alternative: oxidised cytochrome a3
  // title: a_3
  def comp a_3 as
    var a_3: micromolar {pub: out};
    var at: micromolar {pub: in};
    var a_2: micromolar {pub: in};
    a_3 = at-a_2;
  enddef;

  def comp vDH as
    var vDH: flux {pub: out};
    var kDH: flux {init: 28074};
    var KmN: micromolar {init: 100.0};
    var pD: dimensionless {init: 0.8};
    var NAD: micromolar {pub: in};
    var NADH: micromolar {pub: in};
    vDH = kDH*(1.0{dimensionless}/pow(1.0{dimensionless}+KmN/(NAD/NADH), pD));
  enddef;

  def comp vC1 as
    var vC1: flux {pub: out};
    var kC1: flux {init: 238.95};
    var delta_GC1: millivolt;
    var EmN: millivolt {pub: in};
    var EmU: millivolt {pub: in};
    var protonmotive_force: millivolt {pub: in};
    vC1 = kC1*delta_GC1;
    delta_GC1 = EmU-(EmN+protonmotive_force*(4.0{dimensionless}/2.0{dimensionless}));
  enddef;

  def comp vC3 as
    var vC3: flux {pub: out};
    var kC3: flux {init: 136.41};
    var delta_GC3: millivolt;
    var Emc: millivolt {pub: in};
    var u: dimensionless {pub: in};
    var EmU: millivolt {pub: in};
    var protonmotive_force: millivolt {pub: in};
    vC3 = kC3*delta_GC3;
    delta_GC3 = Emc-(EmU+protonmotive_force*((4.0{dimensionless}-2.0{dimensionless}*u)/2.0{dimensionless}));
  enddef;

  def comp vC4 as
    var vC4: flux {pub: out};
    var kC4: flux {init: 136.41};
    var KmO: micromolar {init: 120.0};
    var O2: micromolar {pub: in};
    var c_2: micromolar {pub: in};
    var a_2: micromolar {pub: in};
    vC4 = kC4*a_2*c_2*(1.0{dimensionless}/(1.0{dimensionless}+KmO/O2));
  enddef;

  def comp vSN as
    var vSN: flux {pub: out};
    var nA: dimensionless {pub: out, init: 2.5};
    var kSN: flux {init: 34316.0};
    var delta_GSN: millivolt;
    var delta_Gp: kilojoule_per_mole;
    var delta_Gp0: kilojoule_per_mole {init: 31.9};
    var gamma: dimensionless;
    var Z: millivolt {pub: in};
    var Emc: millivolt {pub: in};
    var u: dimensionless {pub: in};
    var EmU: millivolt {pub: in};
    var protonmotive_force: millivolt {pub: in};
    var ATP_ti: micromolar {pub: in};
    var ADP_ti: micromolar {pub: in};
    var Pi_ti: micromolar {pub: in};
    var F: kilojoule_per_mole_millivolt {pub: in};
    vSN = kSN*((gamma-1.0{dimensionless})/(gamma+1.0{dimensionless}));
    gamma = pow(10.0{dimensionless}, delta_GSN/Z);
    delta_GSN = nA*protonmotive_force-delta_Gp;
    delta_Gp = delta_Gp0/(F+Z*log(1000000.0{micromolar}*(ATP_ti/(ADP_ti*Pi_ti))));
  enddef;

  def comp vEX as
    var vEX: flux {pub: out};
    var Z: millivolt {pub: in};
    var ATP_fi: micromolar {pub: in};
    var ADP_fe: micromolar {pub: in};
    var ADP_fi: micromolar {pub: in};
    var ATP_fe: micromolar {pub: in};
    var in_membrane_potential: millivolt {pub: in};
    var kEX: flux {init: 54572};
    var km_ADP: micromolar {init: 3.5};
    vEX = kEX*(ADP_fe/(ADP_fe+ATP_fe*pow(10.0{dimensionless}, -in_membrane_potential/Z))-ADP_fi/(ADP_fi+ATP_fi*pow(10.0{dimensionless}, -in_membrane_potential/Z)))*(1.0{dimensionless}/(1.0{dimensionless}+km_ADP/ADP_fe));
  enddef;

  def comp vUT as
    var vUT: flux {pub: out};
    var ATP_te: micromolar {pub: in};
    var km_A: micromolar {init: 150.0};
    var kUT: flux {init: 686.5};
    vUT = kUT*(1.0{dimensionless}/(1.0{dimensionless}+km_A/ATP_te));
  enddef;

  def comp vAK as
    var vAK: flux {pub: out};
    var ADP_fe: micromolar {pub: in};
    var ADP_me: micromolar {pub: in};
    var ATP_me: micromolar {pub: in};
    var AMP_e: micromolar {pub: in};
    var kf_AK: second_order_rate_constant {init: 862.10};
    var kb_AK: second_order_rate_constant {init: 22.747};
    vAK = kf_AK*ADP_me*ADP_fe-kb_AK*ATP_me*AMP_e;
  enddef;

  def comp vLK as
    var vLK: flux {pub: out};
    var kL1: flux {init: 2.5};
    var kL2: per_millivolt {init: 0.038};
    var protonmotive_force: millivolt {pub: in};
    vLK = kL1*(exp(kL2*protonmotive_force)-1.0{dimensionless});
  enddef;

  def comp vPI as
    var vPI: flux {pub: out};
    var Pi_je: micromolar {pub: in};
    var He: micromolar {pub: in};
    var Pi_ji: micromolar {pub: in};
    var Hi: micromolar {pub: in};
    var kPI: second_order_rate_constant {init: 69.421};
    vPI = kPI*(He*Pi_je-Hi*Pi_ji);
  enddef;

  def comp vCK as
    var vCK: flux {pub: out};
    var ATP_te: micromolar {pub: in};
    var He: micromolar {pub: in};
    var ADP_te: micromolar {pub: in};
    var Cr: micromolar {pub: in};
    var PCr: micromolar {pub: in};
    var kf_CK: third_order_rate_constant {init: 1.9258};
    var kb_CK: second_order_rate_constant {init: 0.00087538};
    vCK = kf_CK*ADP_te*PCr*He-kb_CK*ATP_te*Cr;
  enddef;

  def comp vEFF as
    var vEFF: flux {pub: out};
    var pH_e: dimensionless {pub: in};
    var pH_o: dimensionless {init: 7.0};
    var k_EFF: flux {init: 1.9258};
    vEFF = k_EFF*(pH_o-pH_e);
  enddef;
  def map between NAD and vDH for
    vars NAD and NAD;
  enddef;
  def map between NAD and redox_potentials for
    vars NAD and NAD;
  enddef;
  def map between NAD and NADH for
    vars NADH and NADH;
  enddef;
  def map between NADH and vDH for
    vars NADH and NADH;
    vars vDH and vDH;
  enddef;
  def map between NADH and redox_potentials for
    vars NADH and NADH;
  enddef;
  def map between NADH and vC1 for
    vars vC1 and vC1;
  enddef;
  def map between NADH and cell for
    vars R_cm and R_cm;
    vars BN and BN;
  enddef;
  def map between He and vC1 for
    vars vC1 and vC1;
  enddef;
  def map between Hi and vC1 for
    vars vC1 and vC1;
  enddef;
  def map between UQH2 and vC1 for
    vars vC1 and vC1;
  enddef;
  def map between redox_potentials and vC1 for
    vars EmN and EmN;
    vars EmU and EmU;
  enddef;
  def map between cell and vC1 for
    vars protonmotive_force and protonmotive_force;
  enddef;
  def map between He and vC3 for
    vars vC3 and vC3;
  enddef;
  def map between Hi and vC3 for
    vars vC3 and vC3;
  enddef;
  def map between UQH2 and vC3 for
    vars vC3 and vC3;
  enddef;
  def map between redox_potentials and vC3 for
    vars Emc and Emc;
    vars EmU and EmU;
  enddef;
  def map between cell and vC3 for
    vars protonmotive_force and protonmotive_force;
    vars u and u;
  enddef;
  def map between c_2 and vC3 for
    vars vC3 and vC3;
  enddef;
  def map between He and vC4 for
    vars vC4 and vC4;
  enddef;
  def map between Hi and vC4 for
    vars vC4 and vC4;
  enddef;
  def map between c_2 and vC4 for
    vars c_2 and c_2;
    vars vC4 and vC4;
  enddef;
  def map between a_2 and vC4 for
    vars a_2 and a_2;
  enddef;
  def map between O2 and vC4 for
    vars O2 and O2;
    vars vC4 and vC4;
  enddef;
  def map between He and vEX for
    vars vEX and vEX;
  enddef;
  def map between Hi and vEX for
    vars vEX and vEX;
  enddef;
  def map between ATP_fi and vEX for
    vars ATP_fi and ATP_fi;
  enddef;
  def map between ADP_fi and vEX for
    vars ADP_fi and ADP_fi;
  enddef;
  def map between cell and vEX for
    vars in_membrane_potential and in_membrane_potential;
    vars Z and Z;
  enddef;
  def map between ADP_te and vEX for
    vars vEX and vEX;
  enddef;
  def map between ATP_te and vEX for
    vars vEX and vEX;
  enddef;
  def map between ATP_ti and vEX for
    vars vEX and vEX;
  enddef;
  def map between ADP_fe and vEX for
    vars ADP_fe and ADP_fe;
  enddef;
  def map between ATP_fe and vEX for
    vars ATP_fe and ATP_fe;
  enddef;
  def map between ATP_te and vUT for
    vars ATP_te and ATP_te;
    vars vUT and vUT;
  enddef;
  def map between ADP_te and vUT for
    vars vUT and vUT;
  enddef;
  def map between Pi_te and vUT for
    vars vUT and vUT;
  enddef;
  def map between He and vPI for
    vars vPI and vPI;
    vars He and He;
  enddef;
  def map between Hi and vPI for
    vars vPI and vPI;
    vars Hi and Hi;
  enddef;
  def map between Pi_ti and vPI for
    vars vPI and vPI;
  enddef;
  def map between Pi_te and vPI for
    vars vPI and vPI;
  enddef;
  def map between Pi_ji and vPI for
    vars Pi_ji and Pi_ji;
  enddef;
  def map between Pi_je and vPI for
    vars Pi_je and Pi_je;
  enddef;
  def map between ADP_fe and vAK for
    vars ADP_fe and ADP_fe;
  enddef;
  def map between ADP_te and vAK for
    vars vAK and vAK;
  enddef;
  def map between ATP_te and vAK for
    vars vAK and vAK;
  enddef;
  def map between ADP_me and vAK for
    vars ADP_me and ADP_me;
  enddef;
  def map between ATP_me and vAK for
    vars ATP_me and ATP_me;
  enddef;
  def map between AMP_e and vAK for
    vars AMP_e and AMP_e;
  enddef;
  def map between He and vLK for
    vars vLK and vLK;
  enddef;
  def map between Hi and vLK for
    vars vLK and vLK;
  enddef;
  def map between cell and vLK for
    vars protonmotive_force and protonmotive_force;
  enddef;
  def map between He and vSN for
    vars vSN and vSN;
    vars nA and nA;
  enddef;
  def map between Hi and vSN for
    vars vSN and vSN;
    vars nA and nA;
  enddef;
  def map between ADP_ti and vSN for
    vars ADP_ti and ADP_ti;
  enddef;
  def map between ATP_ti and vSN for
    vars ATP_ti and ATP_ti;
    vars vSN and vSN;
  enddef;
  def map between Pi_ti and vSN for
    vars Pi_ti and Pi_ti;
    vars vSN and vSN;
  enddef;
  def map between cell and vSN for
    vars protonmotive_force and protonmotive_force;
    vars u and u;
    vars Z and Z;
    vars F and F;
  enddef;
  def map between redox_potentials and vSN for
    vars Emc and Emc;
    vars EmU and EmU;
  enddef;
  def map between He and vCK for
    vars vCK and vCK;
    vars He and He;
  enddef;
  def map between ATP_te and vCK for
    vars ATP_te and ATP_te;
    vars vCK and vCK;
  enddef;
  def map between ADP_te and vCK for
    vars ADP_te and ADP_te;
    vars vCK and vCK;
  enddef;
  def map between Cr and vCK for
    vars Cr and Cr;
  enddef;
  def map between PCr and Cr for
    vars PCr and PCr;
  enddef;
  def map between PCr and vCK for
    vars PCr and PCr;
    vars vCK and vCK;
  enddef;
  def map between He and vEFF for
    vars vEFF and vEFF;
  enddef;
  def map between ATP_ti and cell for
    vars R_cm and R_cm;
  enddef;
  def map between ATP_ti and ATP_fi for
    vars ATP_ti and ATP_ti;
  enddef;
  def map between ATP_ti and ATP_mi for
    vars ATP_ti and ATP_ti;
  enddef;
  def map between ATP_fi and ATP_mi for
    vars ATP_fi and ATP_fi;
  enddef;
  def map between ATP_te and ATP_fe for
    vars ATP_te and ATP_te;
  enddef;
  def map between ATP_te and AMP_e for
    vars ATP_te and ATP_te;
  enddef;
  def map between ATP_te and ATP_me for
    vars ATP_te and ATP_te;
  enddef;
  def map between ADP_te and ADP_fe for
    vars ADP_te and ADP_te;
  enddef;
  def map between ADP_te and AMP_e for
    vars ADP_te and ADP_te;
  enddef;
  def map between ADP_te and ADP_me for
    vars ADP_te and ADP_te;
  enddef;
  def map between ATP_ti and ADP_ti for
    vars ATP_ti and ATP_ti;
  enddef;
  def map between ADP_fi and ADP_ti for
    vars ADP_ti and ADP_ti;
  enddef;
  def map between ADP_fi and Mg_fi for
    vars Mg_fi and Mg_fi;
  enddef;
  def map between ATP_fi and Mg_fi for
    vars Mg_fi and Mg_fi;
  enddef;
  def map between ADP_fe and Mg_fe for
    vars Mg_fe and Mg_fe;
  enddef;
  def map between ATP_fe and Mg_fe for
    vars Mg_fe and Mg_fe;
  enddef;
  def map between ADP_mi and ADP_ti for
    vars ADP_ti and ADP_ti;
  enddef;
  def map between ADP_mi and ADP_fi for
    vars ADP_fi and ADP_fi;
  enddef;
  def map between ADP_me and ADP_fe for
    vars ADP_fe and ADP_fe;
  enddef;
  def map between ATP_me and ATP_fe for
    vars ATP_fe and ATP_fe;
  enddef;
  def map between Pi_ti and cell for
    vars R_cm and R_cm;
  enddef;
  def map between Hi and cell for
    vars R_cm and R_cm;
    vars r_buffi and r_buffi;
    vars u and u;
    vars Hi and Hi;
  enddef;
  def map between He and cell for
    vars r_buffe and r_buffe;
    vars u and u;
    vars He and He;
  enddef;
  def map between c_2 and cell for
    vars R_cm and R_cm;
  enddef;
  def map between c_3 and c_2 for
    vars c_2 and c_2;
  enddef;
  def map between a_3 and a_2 for
    vars a_2 and a_2;
    vars at and at;
  enddef;
  def map between cell and a_2 for
    vars Z and Z;
  enddef;
  def map between redox_potentials and a_2 for
    vars Ema and Ema;
  enddef;
  def map between UQH2 and cell for
    vars R_cm and R_cm;
  enddef;
  def map between UQH2 and UQ for
    vars UQH2 and UQH2;
  enddef;
  def map between P_SUM and Pi_te for
    vars Pi_te and Pi_te;
  enddef;
  def map between P_SUM and Pi_ti for
    vars Pi_ti and Pi_ti;
  enddef;
  def map between P_SUM and PCr for
    vars PCr and PCr;
  enddef;
  def map between P_SUM and ATP_te for
    vars ATP_te and ATP_te;
  enddef;
  def map between P_SUM and ADP_te for
    vars ADP_te and ADP_te;
  enddef;
  def map between P_SUM and AMP_e for
    vars AMP_e and AMP_e;
  enddef;
  def map between P_SUM and ATP_ti for
    vars ATP_ti and ATP_ti;
  enddef;
  def map between P_SUM and ADP_ti for
    vars ADP_ti and ADP_ti;
  enddef;
  def map between P_SUM and cell for
    vars R_cm and R_cm;
  enddef;
  def map between redox_potentials and c_3 for
    vars c_3 and c_3;
  enddef;
  def map between redox_potentials and c_2 for
    vars c_2 and c_2;
  enddef;
  def map between redox_potentials and UQ for
    vars UQ and UQ;
  enddef;
  def map between redox_potentials and UQH2 for
    vars UQH2 and UQH2;
  enddef;
  def map between Pi_ji and Pi_ti for
    vars Pi_ti and Pi_ti;
  enddef;
  def map between Pi_ji and cell for
    vars pH_i and pH_i;
    vars pKa and pKa;
  enddef;
  def map between Pi_je and Pi_te for
    vars Pi_te and Pi_te;
  enddef;
  def map between Pi_je and cell for
    vars pH_e and pH_e;
    vars pKa and pKa;
  enddef;
  def map between redox_potentials and cell for
    vars Z and Z;
    vars u and u;
    vars protonmotive_force and protonmotive_force;
  enddef;
  def map between vEFF and cell for
    vars pH_e and pH_e;
  enddef;
  def map between NADH and environment for
    vars time and time;
  enddef;
  def map between O2 and environment for
    vars time and time;
  enddef;
  def map between Hi and environment for
    vars time and time;
  enddef;
  def map between He and environment for
    vars time and time;
  enddef;
  def map between ADP_fi and environment for
    vars time and time;
  enddef;
  def map between ATP_ti and environment for
    vars time and time;
  enddef;
  def map between ADP_te and environment for
    vars time and time;
  enddef;
  def map between ATP_te and environment for
    vars time and time;
  enddef;
  def map between PCr and environment for
    vars time and time;
  enddef;
  def map between Pi_ji and environment for
    vars time and time;
  enddef;
  def map between Pi_je and environment for
    vars time and time;
  enddef;
  def map between Pi_ti and environment for
    vars time and time;
  enddef;
  def map between Pi_te and environment for
    vars time and time;
  enddef;
  def map between UQH2 and environment for
    vars time and time;
  enddef;
  def map between P_SUM and environment for
    vars time and time;
  enddef;
  def map between c_2 and environment for
    vars time and time;
  enddef;
  def map between a_2 and environment for
    vars time and time;
  enddef;
enddef;
