//   FILE :  lambeth_model_2002.xml
//
// CREATED :  2nd May 2003
//
// LAST MODIFIED : 21st April 2005
//
// AUTHOR :  Catherine Lloyd
//           Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Lambeth and Kushmerick's 2002 model for glycogenesis in skeletal muscle.
//
// CHANGES:
//   05/06/2003 - CML - Corrected the D_GAPDH_calculation in V_GAPDH.
//   21/04/2005 - PJV - Updated syntax to conform with CellML 1.1 specs.
//                      Changed MathML id's to make them unique.
// publisher: The University of Auckland, Auckland Bioengineering Institute
// modification: W3CDTF 2005-04-21; Updated syntax to conform with CellML 1.1 specs. Changed MathML id's to make them unique.; Given Peter; Family Villiger; Other J
// modification: W3CDTF 2003-06-05; Corrected the D_GAPDH_calculation in V_GAPDH.; Given Catherine; Family Lloyd; Other May
// created: W3CDTF 2003-05-02
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: Lambeth and Kushmerick's 2002 model for glycogenesis in skeletal muscle.
// bio_entity: Skeletal Muscle
// comment: FN Catherine Lloyd; This is the CellML description of Lambeth and Kushmerick's 2002 model for glycogenesis in skeletal muscle.
// reference: subject_type keyword; skeletal muscle; glycogenolysis; metabolism
// reference: Pubmed_id 12220081; Given Melissa; Family Lambeth; Other J; Given Martin; Family Kushmerick; Other J; title A computational model for glycogenolysis in skeletal muscle; volume 30; first_page 808; title Annals of Biomedical Engineering; W3CDTF 2002-06; last_page 827
def model lambeth_2002 as
  // A computational model for glycogenolysis in skeletal muscle
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both OpenCell and COR. The units have been checked and they are consistent. However the model in its present state does not recreate the published results.
  //
  // Model Structure
  //
  // ABSTRACT: A dynamic model of the glycogenolytic pathway to lactate in skeletal muscle was constructed with mammalian kinetic parameters obtained from the literature. Energetic buffers relevant to muscle were included. The model design features stoichiometric constraints, mass balance, and fully reversible thermodynamics as defined by the Haldane relation. We employed a novel method of validating the thermodynamics of the model by allowing the closed system to come to equilibrium; the combined mass action ratio of the pathway equaled the product of the individual enzymes' equilibrium constants. Adding features physiologically relevant to muscle-a fixed glycogen concentration, efflux of lactate, and coupling to an ATPase-allowed for a steady-state flux far from equilibrium. The main result of our analysis is that coupling of the glycogenolytic network to the ATPase transformed the entire complex into an ATPase driven system. This steady-state system was most sensitive to the external ATPase activity and not to internal pathway mechanisms. The control distribution among the internal pathway enzymes-although small compared to control by ATPase-depended on the flux level and fraction of glycogen phosphorylase a. This model of muscle glycogenolysis thus has unique features compared to models developed for other cell types.
  //
  // The original paper reference is cited below:
  //
  // A Computational Model for Glycogenolysis in Skeletal Muscle, Melissa J. Lambeth and Martin J. Kushmerick, 2002, Annals of Biomedical Engineering, 30, 808-827. PubMed ID: 12220081 (http://www.ncbi.nlm.nih.gov/pubmed/12220081)
  //
  // reaction diagram
  //
  // A schematic diagram of the reactions used in the model of the glycogenolysis pathway in skeletal muscle.
  // Below, we define some additional units for association with variables and
  // constants within the model.
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_1_75 as
    unit millimolar {expo: 1.75};
  enddef;
  def unit minute as
    unit second {mult: 60.0};
  enddef;
  def unit flux as
    unit millimolar;
    unit minute {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;
  // The following components describe all the reactants and products involved in
  // reactions.

  // title: GLY
  // alternative: glycogen
  def comp GLY as
    var GLY: millimolar {pub: out, init: 112.0};
    var flux_GP: flux {pub: in};
    var time: minute {pub: in};
    ode(GLY, time) = -flux_GP;
  enddef;

  // title: G1P
  // alternative: glucose 1-phosphate
  def comp G1P as
    var G1P: millimolar {pub: out, init: 0.0589};
    var flux_GP: flux {pub: in};
    var V_PGLM: flux {pub: in};
    var time: minute {pub: in};
    ode(G1P, time) = flux_GP-V_PGLM;
  enddef;

  // title: G6P
  // alternative: glucose 6-phosphate
  def comp G6P as
    var G6P: millimolar {pub: out, init: 0.75};
    var V_PGLM: flux {pub: in};
    var V_PGI: flux {pub: in};
    var time: minute {pub: in};
    ode(G6P, time) = V_PGLM-V_PGI;
  enddef;

  // title: F6P
  // alternative: fructose 6-phosphate
  def comp F6P as
    var F6P: millimolar {pub: out, init: 0.228};
    var V_PGI: flux {pub: in};
    var V_PFK: flux {pub: in};
    var time: minute {pub: in};
    ode(F6P, time) = V_PGI-V_PFK;
  enddef;

  // title: FBP
  // alternative: fructose 1,6-bisphosphate
  def comp FBP as
    var FBP: millimolar {pub: out, init: 0.0723};
    var V_PFK: flux {pub: in};
    var V_ALD: flux {pub: in};
    var time: minute {pub: in};
    ode(FBP, time) = V_PFK-V_ALD;
  enddef;

  // title: DHAP
  // alternative: 1,3-dihydroxyacetone
  def comp DHAP as
    var DHAP: millimolar {pub: out, init: 0.0764};
    var V_ALD: flux {pub: in};
    var V_TPI: flux {pub: in};
    var time: minute {pub: in};
    ode(DHAP, time) = V_ALD+V_TPI;
  enddef;

  // title: GAP
  // alternative: glyceraldehyde 3-phosphate
  def comp GAP as
    var GAP: millimolar {pub: out, init: 0.0355};
    var V_ALD: flux {pub: in};
    var V_TPI: flux {pub: in};
    var V_GAPDH: flux {pub: in};
    var time: minute {pub: in};
    ode(GAP, time) = V_ALD-(V_TPI+V_GAPDH);
  enddef;

  // title: Thirteen_BPG
  // alternative: glycerate 1,3-bisphosphate
  def comp Thirteen_BPG as
    var Thirteen_BPG: millimolar {pub: out, init: 0.065};
    var V_GAPDH: flux {pub: in};
    var V_PGK: flux {pub: in};
    var time: minute {pub: in};
    ode(Thirteen_BPG, time) = V_GAPDH-V_PGK;
  enddef;

  // title: three_PG
  // alternative: glycerate 3-phosphate
  def comp three_PG as
    var three_PG: millimolar {pub: out, init: 0.052};
    var V_PGK: flux {pub: in};
    var V_PGM: flux {pub: in};
    var time: minute {pub: in};
    ode(three_PG, time) = V_PGK-V_PGM;
  enddef;

  // title: two_PG
  // alternative: glycerate 2-phosphate
  def comp two_PG as
    var two_PG: millimolar {pub: out, init: 0.005};
    var V_PGM: flux {pub: in};
    var V_ENOL: flux {pub: in};
    var time: minute {pub: in};
    ode(two_PG, time) = V_PGM-V_ENOL;
  enddef;

  // title: PEP
  // alternative: phosphoenolpyruvate
  def comp PEP as
    var PEP: millimolar {pub: out, init: 0.0194};
    var V_ENOL: flux {pub: in};
    var V_PK: flux {pub: in};
    var time: minute {pub: in};
    ode(PEP, time) = V_ENOL-V_PK;
  enddef;

  // title: PYR
  // alternative: pyruvate
  def comp PYR as
    var PYR: millimolar {pub: out, init: 0.0994};
    var V_PK: flux {pub: in};
    var V_LDH: flux {pub: in};
    var time: minute {pub: in};
    ode(PYR, time) = V_PK-V_LDH;
  enddef;

  // title: LAC
  // alternative: lactate
  def comp LAC as
    var LAC: millimolar {pub: out, init: 1.3};
    var V_LDH: flux {pub: in};
    var output: flux;
    var time: minute {pub: in};
    ode(LAC, time) = V_LDH-output;
    output = 0.2{first_order_rate_constant}*LAC;
  enddef;

  // title: Pi
  // alternative: inorganic phosphate
  def comp Pi as
    var Pi: millimolar {pub: out, init: 4.1};
    var flux_GP: flux {pub: in};
    var V_GAPDH: flux {pub: in};
    var V_ATPase: flux {pub: in};
    var time: minute {pub: in};
    ode(Pi, time) = V_ATPase-(flux_GP+V_GAPDH);
  enddef;

  // title: ADP
  // alternative: adenosine diphosphate
  def comp ADP as
    var ADP: millimolar {pub: out, init: 0.013};
    var V_PFK: flux {pub: in};
    var V_PGK: flux {pub: in};
    var V_PK: flux {pub: in};
    var V_ADK: flux {pub: in};
    var V_CK: flux {pub: in};
    var V_ATPase: flux {pub: in};
    var time: minute {pub: in};
    ode(ADP, time) = V_PFK+2.0{dimensionless}*V_ADK+V_CK+V_ATPase+(-(V_PGK+V_PK));
  enddef;

  // title: ATP
  // alternative: adenosine triphosphate
  def comp ATP as
    var ATP: millimolar {pub: out, init: 8.2};
    var V_PFK: flux {pub: in};
    var V_PGK: flux {pub: in};
    var V_PK: flux {pub: in};
    var V_ADK: flux {pub: in};
    var V_CK: flux {pub: in};
    var V_ATPase: flux {pub: in};
    var time: minute {pub: in};
    ode(ATP, time) = V_PGK+V_PK+(-(V_PFK+V_ADK+V_CK+V_ATPase));
  enddef;

  // title: AMP
  // alternative: adenosine monophoshate
  def comp AMP as
    var AMP: millimolar {pub: out, init: 0.99};
    var V_ADK: flux {pub: in};
    var time: minute {pub: in};
    ode(AMP, time) = -V_ADK;
  enddef;

  // title: PCr
  // alternative: phosphocreatine
  def comp PCr as
    var PCr: millimolar {pub: out, init: 34.67};
    var V_CK: flux {pub: in};
    var time: minute {pub: in};
    ode(PCr, time) = V_CK;
  enddef;

  // title: Cr
  // alternative: Creatine
  def comp Cr as
    var Cr: millimolar {pub: out, init: 35.0};
    var V_CK: flux {pub: in};
    var time: minute {pub: in};
    ode(Cr, time) = -V_CK;
  enddef;

  // title: NADH
  // alternative: nicotinamide adenine dinucleotide
  def comp NADH as
    var NADH: millimolar {pub: out, init: 0.001};
    var V_GAPDH: flux {pub: in};
    var V_LDH: flux {pub: in};
    var time: minute {pub: in};
    ode(NADH, time) = V_GAPDH-V_LDH;
  enddef;

  // title: NAD
  // alternative: charged nicotinamide adenine dinucleotide
  def comp NAD as
    var NAD: millimolar {pub: out, init: 0.5};
    var V_GAPDH: flux {pub: in};
    var V_LDH: flux {pub: in};
    var time: minute {pub: in};
    ode(NAD, time) = V_LDH-V_GAPDH;
  enddef;
  // The following components describe the reactions of the model.

  def comp flux_GP as
    var flux_GP: flux {pub: out};
    var frac_a: dimensionless {init: 0.4};
    var frac_b: dimensionless {init: 0.6};
    var V_GPa: flux {pub: in};
    var V_GPb: flux {pub: in};
    flux_GP = frac_a*V_GPa+frac_b*V_GPb;
  enddef;

  def comp V_GPa as
    var V_GPa: flux {pub: out};
    var GLY: millimolar {pub: in};
    var Pi: millimolar {pub: in};
    var G1P: millimolar {pub: in};
    var Ki_GLY_f: millimolar {init: 2.0};
    var Ki_GLY_b: millimolar {init: 2.0};
    var K_GLY_f: millimolar {init: 1.7};
    var K_GLY_b: millimolar {init: 0.15};
    var Keq_GP: dimensionless {init: 0.42};
    var Ki_Pi: millimolar {init: 4.7};
    var K_Pi: millimolar {init: 4.0};
    var Ki_G1P: millimolar {init: 10.1};
    var V_max_r: flux;
    var V_max_f: flux {init: 20.0};
    V_GPa = (V_max_f*(GLY*Pi/(Ki_GLY_f*K_Pi))-V_max_r*(GLY*G1P/(Ki_GLY_b*Ki_G1P)))/(1.0{dimensionless}+GLY/Ki_GLY_f+Pi/Ki_Pi+GLY/Ki_GLY_b+G1P/Ki_G1P+GLY*Pi/(K_GLY_f*Ki_Pi)+GLY*G1P/(K_GLY_b*Ki_G1P));
    V_max_r = V_max_f*K_GLY_b*Ki_G1P/(Ki_GLY_f*K_Pi*Keq_GP);
  enddef;

  def comp V_GPb as
    var V_GPb: flux {pub: out};
    var GLY: millimolar {pub: in};
    var Pi: millimolar {pub: in};
    var G1P: millimolar {pub: in};
    var AMP: millimolar {pub: in};
    var Ki_GLY_f: millimolar {init: 15.0};
    var Ki_GLY_b: millimolar {init: 4.4};
    var K_GLY_f: millimolar {init: 1.7};
    var Keq_GP: dimensionless {init: 0.42};
    var nH: dimensionless {init: 1.75};
    var K_AMP: millimolar_1_75 {init: 1.9E-6};
    var K_GLY_b: millimolar {init: 0.15};
    var Ki_Pi: millimolar {init: 4.6};
    var K_Pi: millimolar {init: 0.2};
    var Ki_G1P: millimolar {init: 7.4};
    var K_G1P: millimolar {init: 1.5};
    var V_max_r: flux;
    var V_max_f: flux {init: 30.0};
    V_GPb = (V_max_f*(GLY*Pi/(Ki_GLY_f*K_Pi))-V_max_r*(GLY*G1P/(Ki_GLY_b*Ki_G1P)))/(1.0{dimensionless}+GLY/Ki_GLY_f+Pi/Ki_Pi+GLY/Ki_GLY_b+G1P/Ki_G1P+GLY*Pi/(K_GLY_f*Ki_Pi)+GLY*G1P/(K_GLY_b*Ki_G1P))*(pow(AMP, nH)/K_AMP/(1.0{dimensionless}+pow(AMP, nH)/K_AMP));
    V_max_r = V_max_f*Ki_GLY_b*K_G1P/(K_GLY_f*Ki_Pi*Keq_GP);
  enddef;

  def comp V_PGLM as
    var V_PGLM: flux {pub: out};
    var G6P: millimolar {pub: in};
    var G1P: millimolar {pub: in};
    var K_G1P: millimolar {init: 0.063};
    var K_G6P: millimolar {init: 0.03};
    var Keq_PGLM: dimensionless {init: 16.62};
    var V_max_r: flux;
    var V_max_f: flux {init: 480.0};
    V_PGLM = (V_max_f*(G1P/K_G1P)-V_max_r*(G6P/K_G6P))/(1.0{dimensionless}+G1P/K_G1P+G6P/K_G6P);
    V_max_r = V_max_f*K_G6P/(K_G1P*Keq_PGLM);
  enddef;

  def comp V_PGI as
    var V_PGI: flux {pub: out};
    var F6P: millimolar {pub: in};
    var G6P: millimolar {pub: in};
    var K_G6P: millimolar {init: 0.18};
    var K_F6P: millimolar {init: 0.119};
    var Keq_PGI: dimensionless {init: 0.45};
    var V_max_r: flux {init: 880.0};
    var V_max_f: flux;
    V_PGI = (V_max_f*(G6P/K_G6P)-V_max_r*(F6P/K_F6P))/(1.0{dimensionless}+G6P/K_G6P+F6P/K_F6P);
    V_max_f = V_max_r*K_G6P*Keq_PGI/K_F6P;
  enddef;

  def comp V_PFK as
    var V_PFK: flux {pub: out};
    var F6P: millimolar {pub: in};
    var FBP: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var AMP: millimolar {pub: in};
    var K_FBP: millimolar {init: 4.02};
    var K_FBP_: millimolar {init: 4.02};
    var K_F6P: millimolar {init: 0.18};
    var K_ATP: millimolar {init: 0.08};
    var K_F6P_: millimolar {init: 20.0};
    var K_ATP_: millimolar {init: 0.25};
    var K_ADP: millimolar {init: 2.7};
    var K_ADP_: millimolar {init: 2.7};
    var Ki_ATP: millimolar {init: 0.87};
    var Ka_AMP: millimolar {init: 0.06};
    var V_max_r: flux;
    var V_max_f: flux {init: 56.0};
    var alpha: dimensionless;
    var L: dimensionless;
    var Lo: dimensionless {init: 13.0};
    var delta: dimensionless;
    var delta_: dimensionless;
    var d: dimensionless {init: 0.01};
    var var_e: dimensionless {init: 0.01};
    V_PFK = (V_max_f*(ATP*F6P/(K_ATP*K_F6P))-V_max_r*(ADP*FBP/(K_ADP*K_FBP)))/delta*((1.0{dimensionless}+alpha*L*pow(delta_/delta, 3.0{dimensionless}))/(1.0{dimensionless}+L*pow(delta_/delta, 4.0{dimensionless})));
    delta = (1.0{dimensionless}+F6P/K_F6P)*(1.0{dimensionless}+ATP/K_ATP)+ADP/K_ADP+FBP/K_FBP*(1.0{dimensionless}+ADP/K_ADP);
    delta_ = (1.0{dimensionless}+F6P/K_F6P_)*(1.0{dimensionless}+ATP/K_ATP_)+ADP/K_ADP_+FBP/K_FBP_*(1.0{dimensionless}+ADP/K_ADP_);
    alpha = K_F6P*K_ATP/(K_F6P_*K_ATP_);
    L = Lo*pow((1.0{dimensionless}+ATP/Ki_ATP)/(1.0{dimensionless}+d*(ATP/Ki_ATP))*((1.0{dimensionless}+var_e*(AMP/Ka_AMP))/(1.0{dimensionless}+AMP/Ka_AMP)), 4.0{dimensionless});
    V_max_r = V_max_f*K_ADP*K_FBP/(K_ATP*K_F6P);
  enddef;

  def comp V_ALD as
    var V_ALD: flux {pub: out};
    var FBP: millimolar {pub: in};
    var GAP: millimolar {pub: in};
    var DHAP: millimolar {pub: in};
    var K_GAP: millimolar {init: 1.0};
    var K_FBP: millimolar {init: 0.05};
    var K_DHAP: millimolar {init: 2.0};
    var Keq_ALD: millimolar {init: 9.5E-5};
    var V_max_r: flux;
    var V_max_f: flux {init: 104.0};
    V_ALD = (V_max_f*(FBP/K_FBP)-V_max_r*(DHAP*GAP/(K_DHAP*K_GAP)))/(1.0{dimensionless}+FBP/K_FBP+DHAP/K_DHAP+GAP/K_GAP);
    V_max_r = V_max_f*K_DHAP*K_GAP/(K_FBP*Keq_ALD);
  enddef;

  def comp V_TPI as
    var V_TPI: flux {pub: out};
    var GAP: millimolar {pub: in};
    var DHAP: millimolar {pub: in};
    var K_GAP: millimolar {init: 0.32};
    var K_DHAP: millimolar {init: 0.61};
    var Keq_TPI: dimensionless {init: 0.052};
    var V_max_r: flux;
    var V_max_f: flux {init: 12000.0};
    V_TPI = (V_max_f*(GAP/K_GAP)-V_max_r*(DHAP/K_DHAP))/(1.0{dimensionless}+DHAP/K_DHAP+GAP/K_GAP);
    V_max_r = V_max_f*K_DHAP/(K_GAP*Keq_TPI);
  enddef;

  def comp V_GAPDH as
    var V_GAPDH: flux {pub: out};
    var GAP: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var NAD: millimolar {pub: in};
    var Thirteen_BPG: millimolar {pub: in};
    var Pi: millimolar {pub: in};
    var D_GAPDH: dimensionless;
    var K_GAP: millimolar {init: 0.0025};
    var K_Pi: millimolar {init: 0.29};
    var K_NAD: millimolar {init: 0.09};
    var K_NADH: millimolar {init: 0.0033};
    var K_Thirteen_BPG: millimolar {init: 0.0008};
    var Keq_GAPDH: dimensionless {init: 0.089};
    var V_max_r: flux;
    var V_max_f: flux {init: 1265.0};
    V_GAPDH = (V_max_f*(GAP*NAD*Pi/(K_GAP*K_NAD*K_Pi))-V_max_r*(Thirteen_BPG*NADH/(K_Thirteen_BPG*K_NADH)))/D_GAPDH;
    D_GAPDH = 1.0{dimensionless}+GAP/K_GAP+NAD/K_NAD+Pi/K_Pi+GAP*NAD/(K_GAP*K_NAD)+GAP*NAD*Pi/(K_GAP*K_NAD*K_Pi)+Thirteen_BPG/K_Thirteen_BPG+NADH/K_NADH+Thirteen_BPG*NADH/(K_Thirteen_BPG*K_NADH);
    V_max_r = V_max_f*1{millimolar}*K_Thirteen_BPG*K_NADH/(K_GAP*K_NAD*K_Pi*Keq_GAPDH);
  enddef;

  def comp V_PGK as
    var V_PGK: flux {pub: out};
    var three_PG: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var Thirteen_BPG: millimolar {pub: in};
    var K_three_PG: millimolar {init: 1.2};
    var K_ADP: millimolar {init: 0.008};
    var K_ATP: millimolar {init: 0.35};
    var K_Thirteen_BPG: millimolar {init: 0.002};
    var Keq_PGK: dimensionless {init: 57109.0};
    var V_max_r: flux {init: 1120.0};
    var V_max_f: flux;
    V_PGK = (V_max_f*(Thirteen_BPG*ADP/(K_Thirteen_BPG*K_ADP))-V_max_r*(three_PG*ATP/(K_three_PG*K_ATP)))/(1.0{dimensionless}+Thirteen_BPG/K_Thirteen_BPG+ADP/K_ADP+Thirteen_BPG*ADP/(K_Thirteen_BPG*K_ADP)+three_PG/K_three_PG+ATP/K_ATP+three_PG*ATP/(K_three_PG*K_ATP));
    V_max_f = V_max_r*K_Thirteen_BPG*K_ADP*Keq_PGK/(K_three_PG*K_ATP);
  enddef;

  def comp V_PGM as
    var V_PGM: flux {pub: out};
    var two_PG: millimolar {pub: in};
    var three_PG: millimolar {pub: in};
    var K_two_PG: millimolar {init: 0.014};
    var K_three_PG: millimolar {init: 0.2};
    var Keq_PGM: dimensionless {init: 0.18};
    var V_max_r: flux;
    var V_max_f: flux {init: 1120.0};
    V_PGM = (V_max_f*(three_PG/K_three_PG)-V_max_r*(two_PG/K_two_PG))/(1.0{dimensionless}+three_PG/K_three_PG+two_PG/K_two_PG);
    V_max_r = V_max_f*K_two_PG/(K_three_PG*Keq_PGM);
  enddef;

  def comp V_ENOL as
    var V_ENOL: flux {pub: out};
    var PEP: millimolar {pub: in};
    var two_PG: millimolar {pub: in};
    var K_PEP: millimolar {init: 0.37};
    var K_two_PG: millimolar {init: 0.1};
    var Keq_ENOL: dimensionless {init: 0.49};
    var V_max_r: flux;
    var V_max_f: flux {init: 192.0};
    V_ENOL = (V_max_f*(two_PG/K_two_PG)-V_max_r*(PEP/K_PEP))/(1.0{dimensionless}+two_PG/K_two_PG+PEP/K_PEP);
    V_max_r = V_max_f*K_PEP/(K_two_PG*Keq_ENOL);
  enddef;

  def comp V_PK as
    var V_PK: flux {pub: out};
    var PYR: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var PEP: millimolar {pub: in};
    var K_PYR: millimolar {init: 7.05};
    var K_ADP: millimolar {init: 0.3};
    var K_ATP: millimolar {init: 1.13};
    var K_PEP: millimolar {init: 0.08};
    var Keq_PK: dimensionless {init: 10304.0};
    var V_max_r: flux;
    var V_max_f: flux {init: 1440.0};
    V_PK = (V_max_f*(PEP*ADP/(K_PEP*K_ADP))-V_max_r*(PYR*ATP/(K_PYR*K_ATP)))/(1.0{dimensionless}+PEP/K_PEP+ADP/K_ADP+PEP*ADP/(K_PEP*K_ADP)+PYR/K_PYR+ATP/K_ATP+PYR*ATP/(K_PYR*K_ATP));
    V_max_r = V_max_f*K_ATP*K_PYR/(K_PEP*K_ADP*Keq_PK);
  enddef;

  def comp V_LDH as
    var V_LDH: flux {pub: out};
    var LAC: millimolar {pub: in};
    var NAD: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var PYR: millimolar {pub: in};
    var K_LAC: millimolar {init: 17.0};
    var K_NADH: millimolar {init: 0.002};
    var K_NAD: millimolar {init: 0.849};
    var K_PYR: millimolar {init: 0.335};
    var Keq_LDH: dimensionless {init: 16198.0};
    var V_max_r: flux;
    var V_max_f: flux {init: 1920.0};
    V_LDH = (V_max_f*(PYR*NADH/(K_PYR*K_NADH))-V_max_r*(LAC*NAD/(K_LAC*K_NAD)))/(1.0{dimensionless}+PYR/K_PYR+NADH/K_NADH+PYR*NADH/(K_PYR*K_NADH)+LAC/K_LAC+NAD/K_NAD+LAC*NAD/(K_LAC*K_NAD));
    V_max_r = V_max_f*K_LAC*K_NAD/(K_PYR*K_NADH*Keq_LDH);
  enddef;

  def comp V_CK as
    var V_CK: flux {pub: out};
    var ADP: millimolar {pub: in};
    var PCr: millimolar {pub: in};
    var Cr: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var Ki_ADP: millimolar {init: 0.135};
    var K_Cr: millimolar {init: 3.8};
    var K_PCr: millimolar {init: 1.11};
    var Ki_PCr: millimolar {init: 3.9};
    var Ki_ATP: millimolar {init: 3.5};
    var Keq_CK: dimensionless {init: 233.0};
    var V_max_r: flux {init: 500.0};
    var V_max_f: flux;
    V_CK = (V_max_f*(ATP*Cr/(Ki_ATP*K_Cr))-V_max_r*(ADP*PCr/(Ki_ADP*K_PCr)))/(1.0{dimensionless}+ADP/Ki_ADP+PCr/Ki_PCr+ADP*PCr/(Ki_ADP*K_PCr)+ATP/Ki_ATP+ATP*Cr/(Ki_ATP*K_Cr));
    V_max_f = V_max_r*Ki_ATP*K_Cr*Keq_CK/(Ki_ADP*K_PCr);
  enddef;

  def comp V_ADK as
    var V_ADK: flux {pub: out};
    var ADP: millimolar {pub: in};
    var AMP: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var K_ADP: millimolar {init: 0.35};
    var K_AMP: millimolar {init: 0.32};
    var K_ATP: millimolar {init: 0.27};
    var Keq_ADK: dimensionless {init: 2.21};
    var V_max_r: flux;
    var V_max_f: flux {init: 880.0};
    V_ADK = (V_max_f*(ATP*AMP/(K_ATP*K_AMP))-V_max_r*(sqr(ADP)/sqr(K_ADP)))/(1.0{dimensionless}+ATP/K_ATP+AMP/K_AMP+ATP*AMP/(K_ATP*K_AMP)+2.0{dimensionless}*ADP/K_ADP+sqr(ADP)/sqr(K_ADP));
    V_max_r = V_max_f*sqr(K_ADP)/(K_ATP*K_AMP*Keq_ADK);
  enddef;

  def comp V_ATPase as
    var V_ATPase: flux {pub: out, init: 600.0};
  enddef;
  def map between GLY and V_GPa for
    vars GLY and GLY;
  enddef;
  def map between GLY and V_GPb for
    vars GLY and GLY;
  enddef;
  def map between GLY and flux_GP for
    vars flux_GP and flux_GP;
  enddef;
  def map between V_GPa and flux_GP for
    vars V_GPa and V_GPa;
  enddef;
  def map between V_GPb and flux_GP for
    vars V_GPb and V_GPb;
  enddef;
  def map between G1P and V_GPa for
    vars G1P and G1P;
  enddef;
  def map between G1P and V_GPb for
    vars G1P and G1P;
  enddef;
  def map between G1P and flux_GP for
    vars flux_GP and flux_GP;
  enddef;
  def map between G1P and V_PGLM for
    vars G1P and G1P;
    vars V_PGLM and V_PGLM;
  enddef;
  def map between G6P and V_PGLM for
    vars G6P and G6P;
    vars V_PGLM and V_PGLM;
  enddef;
  def map between G6P and V_PGI for
    vars G6P and G6P;
    vars V_PGI and V_PGI;
  enddef;
  def map between F6P and V_PGI for
    vars F6P and F6P;
    vars V_PGI and V_PGI;
  enddef;
  def map between F6P and V_PFK for
    vars F6P and F6P;
    vars V_PFK and V_PFK;
  enddef;
  def map between FBP and V_PFK for
    vars FBP and FBP;
    vars V_PFK and V_PFK;
  enddef;
  def map between FBP and V_ALD for
    vars FBP and FBP;
    vars V_ALD and V_ALD;
  enddef;
  def map between DHAP and V_ALD for
    vars DHAP and DHAP;
    vars V_ALD and V_ALD;
  enddef;
  def map between DHAP and V_TPI for
    vars DHAP and DHAP;
    vars V_TPI and V_TPI;
  enddef;
  def map between GAP and V_TPI for
    vars GAP and GAP;
    vars V_TPI and V_TPI;
  enddef;
  def map between GAP and V_ALD for
    vars GAP and GAP;
    vars V_ALD and V_ALD;
  enddef;
  def map between GAP and V_GAPDH for
    vars GAP and GAP;
    vars V_GAPDH and V_GAPDH;
  enddef;
  def map between Thirteen_BPG and V_GAPDH for
    vars Thirteen_BPG and Thirteen_BPG;
    vars V_GAPDH and V_GAPDH;
  enddef;
  def map between Thirteen_BPG and V_PGK for
    vars Thirteen_BPG and Thirteen_BPG;
    vars V_PGK and V_PGK;
  enddef;
  def map between three_PG and V_PGK for
    vars three_PG and three_PG;
    vars V_PGK and V_PGK;
  enddef;
  def map between three_PG and V_PGM for
    vars three_PG and three_PG;
    vars V_PGM and V_PGM;
  enddef;
  def map between two_PG and V_PGM for
    vars two_PG and two_PG;
    vars V_PGM and V_PGM;
  enddef;
  def map between two_PG and V_ENOL for
    vars two_PG and two_PG;
    vars V_ENOL and V_ENOL;
  enddef;
  def map between PEP and V_ENOL for
    vars PEP and PEP;
    vars V_ENOL and V_ENOL;
  enddef;
  def map between PEP and V_PK for
    vars PEP and PEP;
    vars V_PK and V_PK;
  enddef;
  def map between PYR and V_PK for
    vars PYR and PYR;
    vars V_PK and V_PK;
  enddef;
  def map between PYR and V_LDH for
    vars PYR and PYR;
    vars V_LDH and V_LDH;
  enddef;
  def map between LAC and V_LDH for
    vars LAC and LAC;
    vars V_LDH and V_LDH;
  enddef;
  def map between Pi and V_GPa for
    vars Pi and Pi;
  enddef;
  def map between Pi and V_GPb for
    vars Pi and Pi;
  enddef;
  def map between AMP and V_GPb for
    vars AMP and AMP;
  enddef;
  def map between AMP and V_PFK for
    vars AMP and AMP;
  enddef;
  def map between Pi and flux_GP for
    vars flux_GP and flux_GP;
  enddef;
  def map between Pi and V_GAPDH for
    vars Pi and Pi;
    vars V_GAPDH and V_GAPDH;
  enddef;
  def map between Pi and V_ATPase for
    vars V_ATPase and V_ATPase;
  enddef;
  def map between ADP and V_PFK for
    vars ADP and ADP;
    vars V_PFK and V_PFK;
  enddef;
  def map between ADP and V_PGK for
    vars ADP and ADP;
    vars V_PGK and V_PGK;
  enddef;
  def map between ADP and V_PK for
    vars ADP and ADP;
    vars V_PK and V_PK;
  enddef;
  def map between ADP and V_ADK for
    vars ADP and ADP;
    vars V_ADK and V_ADK;
  enddef;
  def map between ADP and V_CK for
    vars ADP and ADP;
    vars V_CK and V_CK;
  enddef;
  def map between ADP and V_ATPase for
    vars V_ATPase and V_ATPase;
  enddef;
  def map between ATP and V_PFK for
    vars ATP and ATP;
    vars V_PFK and V_PFK;
  enddef;
  def map between ATP and V_PGK for
    vars ATP and ATP;
    vars V_PGK and V_PGK;
  enddef;
  def map between ATP and V_PK for
    vars ATP and ATP;
    vars V_PK and V_PK;
  enddef;
  def map between ATP and V_ADK for
    vars ATP and ATP;
    vars V_ADK and V_ADK;
  enddef;
  def map between ATP and V_CK for
    vars ATP and ATP;
    vars V_CK and V_CK;
  enddef;
  def map between ATP and V_ATPase for
    vars V_ATPase and V_ATPase;
  enddef;
  def map between AMP and V_ADK for
    vars AMP and AMP;
    vars V_ADK and V_ADK;
  enddef;
  def map between PCr and V_CK for
    vars PCr and PCr;
    vars V_CK and V_CK;
  enddef;
  def map between Cr and V_CK for
    vars Cr and Cr;
    vars V_CK and V_CK;
  enddef;
  def map between NADH and V_GAPDH for
    vars NADH and NADH;
    vars V_GAPDH and V_GAPDH;
  enddef;
  def map between NADH and V_LDH for
    vars NADH and NADH;
    vars V_LDH and V_LDH;
  enddef;
  def map between NAD and V_GAPDH for
    vars NAD and NAD;
    vars V_GAPDH and V_GAPDH;
  enddef;
  def map between NAD and V_LDH for
    vars NAD and NAD;
    vars V_LDH and V_LDH;
  enddef;
  def map between GLY and environment for
    vars time and time;
  enddef;
  def map between G1P and environment for
    vars time and time;
  enddef;
  def map between G6P and environment for
    vars time and time;
  enddef;
  def map between F6P and environment for
    vars time and time;
  enddef;
  def map between FBP and environment for
    vars time and time;
  enddef;
  def map between DHAP and environment for
    vars time and time;
  enddef;
  def map between GAP and environment for
    vars time and time;
  enddef;
  def map between Thirteen_BPG and environment for
    vars time and time;
  enddef;
  def map between three_PG and environment for
    vars time and time;
  enddef;
  def map between two_PG and environment for
    vars time and time;
  enddef;
  def map between PEP and environment for
    vars time and time;
  enddef;
  def map between PYR and environment for
    vars time and time;
  enddef;
  def map between LAC and environment for
    vars time and time;
  enddef;
  def map between Pi and environment for
    vars time and time;
  enddef;
  def map between ADP and environment for
    vars time and time;
  enddef;
  def map between ATP and environment for
    vars time and time;
  enddef;
  def map between AMP and environment for
    vars time and time;
  enddef;
  def map between PCr and environment for
    vars time and time;
  enddef;
  def map between Cr and environment for
    vars time and time;
  enddef;
  def map between NADH and environment for
    vars time and time;
  enddef;
  def map between NAD and environment for
    vars time and time;
  enddef;
enddef;
