<?xml version="1.0" encoding="UTF-8"?>

<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xmlns:ns7="http://www.cellml.org/metadata/simulation/1.0#" name="overgaard_baseline_2007" cmeta:id="overgaard_baseline_2007">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
        This CellML model represents the "Baseline Model" in the published paper.  The model runs in PCEnv and has been unit checked.  All the units are balanced.  Note that this model will not run in COR due to the presence of a "remainder" function.  Note there are no figures in the paper showing the simuation results of this model.  However we can say that the simulation output from the CellML model looks reasonable - the body temperature and metabolic rates have physiologically realistic values and oscillate over a 24 hour period according to day and night changes.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: PURPOSE: To describe the pharmacodynamic effects of recombinant human interleukin-21 (IL-21) on core body temperature in cynomolgus monkeys using basic mechanisms of heat regulation. A major effort was devoted to compare the use of ordinary differential equations (ODEs) with stochastic differential equations (SDEs) in pharmacokinetic pharmacodynamic (PKPD) modelling. METHODS: A temperature model was formulated including circadian rhythm, metabolism, heat loss, and a thermoregulatory set-point. This model was formulated as a mixed-effects model based on SDEs using NONMEM. RESULTS: The effects of IL-21 were on the set-point and the circadian rhythm of metabolism. The model was able to describe a complex set of IL-21 induced phenomena, including 1) disappearance of the circadian rhythm, 2) no effect after first dose, and 3) high variability after second dose. SDEs provided a more realistic description with improved simulation properties, and further changed the model into one that could not be falsified by the autocorrelation function. CONCLUSIONS: The IL-21 induced effects on thermoregulation in cynomolgus monkeys are explained by a biologically plausible model. The quality of the model was improved by the use of SDEs.
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="overgaard_2007.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram of the model for IL-21 induced regulation of core body temperature.</caption>
</informalfigure>

<para>
The original paper reference is cited below:
</para>

<para>
PKPD model of interleukin-21 effects on thermoregulation in monkeys - application and evaluation of stochastic differential equations, Rune Viig Overgaard, Nick Holford, Klaus A. Rytved and Henrik Madsen, 2007, Pharmaceutical Research, 24, (2), 298-309.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&amp;cmd=Retrieve&amp;dopt=AbstractPlus&amp;list_uids=17009101&amp;query_hl=1&amp;itool=pubmed_docsum">PubMed ID: 17009101</ulink>
</para>

</sect1>
</article>
</documentation> 
   
   <units name="hour">
      <unit units="second" multiplier="3600"/>
   </units>
   
   <units name="day">
      <unit units="second" multiplier="86400"/>
   </units>
   
   <units name="per_hour">
      <unit units="hour" exponent="-1"/>
   </units>
   
   <units name="W">
      <unit units="watt"/>
   </units>
   
   <units name="kg_per_day_mg">
      <unit units="kilogram"/>
	  <unit units="day" exponent="-1"/>
	  <unit units="gram" prefix="milli" exponent="-1"/>
   </units>
   
   <units name="W_per_kg">
      <unit units="W"/>
	  <unit units="kilogram" exponent="-1"/>
   </units>
   
   <units name="W_per_kg_C">
      <unit units="W"/>
	  <unit units="kilogram" exponent="-1"/>
	  <unit units="celsius" exponent="-1"/>
   </units>
   
   <units name="W_per_kg_C2">
      <unit units="W"/>
	  <unit units="kilogram" exponent="-1"/>
	  <unit units="celsius" exponent="-2"/>
   </units>
   
   <units name="kJ_per_kg_C">
      <unit units="joule" prefix="kilo" />
	  <unit units="kilogram" exponent="-1"/>
	  <unit units="celsius" exponent="-1"/>
   </units>
   
   <units name="seconds_per_hour">
      <unit units="second"/>
      <unit units="hour" exponent="-1" />
   </units>
   
   
   <component name="environment">
      <variable units="hour" public_interface="out" name="time"/>
   </component>
   
   <component name="model_parameters">
      <variable units="celsius" public_interface="out" name="T_a" initial_value="21.0"/>
	  <variable units="celsius" public_interface="out" name="T_b" initial_value="38.0"/>
	  <variable units="celsius" public_interface="out" name="delta_T" initial_value="1.57"/>
	  <variable units="W_per_kg_C2" public_interface="out" name="kinc" initial_value="0.0258"/>
   </component>
   
   <component name="M_c">
      <variable units="W_per_kg" public_interface="out" name="M_c"/>
      
	  <variable units="hour" name="t_day" initial_value="17.5"/>
	  <variable units="hour" name="t_night" initial_value="6.73"/>
	  <variable units="second" name="tprime" />
      <variable units="second" name="day_length" initial_value="86400"/>
	  
	  <variable units="W_per_kg" public_interface="in" name="M_day"/>
	  <variable units="W_per_kg" public_interface="in" name="M_night"/>
	  <variable units="hour" public_interface="in" name="time"/>
      
	  <math xmlns="http://www.w3.org/1998/Math/MathML" id="1">
         <apply>
		    <eq/>
			<ci>tprime</ci>
			<apply>
			   <rem/>
			   <apply>
			      <times/>
				  <ci>time</ci>
				  <cn cellml:units="per_hour">3600</cn>
				  <cn cellml:units="second">1</cn>
			   </apply>
			   <ci>day_length</ci>
			</apply>
		 </apply>
	  </math>
			
	  <math xmlns="http://www.w3.org/1998/Math/MathML" id="1a">
         <apply>
            <eq/>
            <ci>M_c</ci>
            <piecewise>
               <piece>
                  <ci>M_night</ci>
                  <apply>
                     <and/>
                     <apply>
                        <geq/>
                        <apply>
                           <divide/>
                           <ci>tprime</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="seconds_per_hour">3600</cn>
                        </apply>
                        <ci>t_night</ci>
                     </apply>
                     <apply>
                        <lt/>
                        <apply>
                           <divide/>
                           <ci>tprime</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="seconds_per_hour">3600</cn>
                        </apply>
                        <ci>t_day</ci>
                     </apply>
                  </apply>
               </piece>
               <otherwise>
                  <ci>M_day</ci>
               </otherwise>
            </piecewise>
         </apply>
      </math>
   </component>
   
   <component name="M">
      <variable units="W_per_kg" public_interface="out" name="M" initial_value="3.5"/>
	  
	  <variable units="per_hour" name="km" initial_value="1.1375"/>
      
	  <variable units="W_per_kg" public_interface="in" name="M_c"/>
	  <variable units="hour" public_interface="in" name="time"/>
      
	  <math xmlns="http://www.w3.org/1998/Math/MathML" id="2">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>M</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <minus/>
				  <ci>km</ci>
			   </apply>
			   <apply>
                  <minus/>
				  <ci>M</ci>
				  <ci>M_c</ci>
			   </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="T">
      <variable units="celsius" public_interface="out" name="T" initial_value="38.785"/>
	  
	  <variable units="kJ_per_kg_C" name="c" initial_value="3.47"/>
      
	  <variable units="W_per_kg_C" public_interface="in" name="k"/>
	  <variable units="W_per_kg" public_interface="in" name="M"/>
	  <variable units="celsius" public_interface="in" name="T_a"/>
	  <variable units="hour" public_interface="in" name="time"/>
      
	  <math xmlns="http://www.w3.org/1998/Math/MathML" id="3">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>T</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <power/>
				  <ci>c</ci>
				  <cn cellml:units="dimensionless">-1</cn>
			   </apply>
			   <apply>
                  <minus/>
				  <ci>M</ci>
				  <apply>
                     <times/>
				     <ci>k</ci>
					 <apply>
                        <minus/>
				        <ci>T</ci>
						<ci>T_a</ci>
					 </apply>
				  </apply>
			   </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="k">
      <variable units="W_per_kg_C" public_interface="out" name="k"/>
	  
	  <variable units="W_per_kg_C2" public_interface="in" name="kinc"/>
      <variable units="W_per_kg_C" public_interface="in" name="kb"/>
	  <variable units="celsius" public_interface="in" name="T"/>
	  <variable units="celsius" public_interface="in" name="T_b"/>
	  
	  <math xmlns="http://www.w3.org/1998/Math/MathML" id="4">
         <apply>
            <eq/>
            <ci>k</ci>
            <apply>
               <plus/>
               <ci>kb</ci>
			   <apply>
                  <times/>
				  <ci>kinc</ci>
				  <apply>
                     <minus/>
				     <ci>T</ci>
					 <ci>T_b</ci>
			      </apply>
			   </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="T_day">
      <variable units="celsius" public_interface="out" name="T_day"/>
    
	  <variable units="celsius" public_interface="in" name="T_b"/>
      <variable units="celsius" public_interface="in" name="delta_T"/>
	
      <math xmlns="http://www.w3.org/1998/Math/MathML" id="5"> 
         <apply>
            <eq/>
            <ci>T_day</ci>
            <apply>
               <plus/>
               <ci>T_b</ci>
			   <apply>
                  <divide/>
				  <ci>delta_T</ci>
				  <cn cellml:units="dimensionless">2</cn>
			   </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="T_night">
      <variable units="celsius" public_interface="out" name="T_night"/>
    
	  <variable units="celsius" public_interface="in" name="T_b"/>
      <variable units="celsius" public_interface="in" name="delta_T"/>
	
      <math xmlns="http://www.w3.org/1998/Math/MathML" id="6"> 
         <apply>
            <eq/>
            <ci>T_night</ci>
            <apply>
               <minus/>
               <ci>T_b</ci>
			   <apply>
                  <divide/>
				  <ci>delta_T</ci>
				  <cn cellml:units="dimensionless">2</cn>
			   </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="kb">
      <variable units="W_per_kg_C"  public_interface="out" name="kb"/>
    
	  <variable units="W_per_kg" name="M_b" initial_value="3.0"/>
	
	  <variable units="celsius" public_interface="in" name="T_b"/>
      <variable units="celsius" public_interface="in" name="T_a"/>
	
      <math xmlns="http://www.w3.org/1998/Math/MathML" id="7"> 
         <apply>
            <eq/>
            <ci>kb</ci>
            <apply>
               <divide/>
               <ci>M_b</ci>
			   <apply>
                  <minus/>
				  <ci>T_b</ci>
				  <ci>T_a</ci>
			   </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="M_day">
      <variable units="W_per_kg" public_interface="out" name="M_day"/>
    
	  <variable units="W_per_kg_C2" public_interface="in" name="kinc"/>
      <variable units="W_per_kg_C" public_interface="in" name="kb"/>
	  <variable units="celsius" public_interface="in" name="T_b"/>
      <variable units="celsius" public_interface="in" name="T_a"/>
	  <variable units="celsius" public_interface="in" name="T_day"/>
	
      <math xmlns="http://www.w3.org/1998/Math/MathML" id="8"> 
         <apply>
            <eq/>
            <ci>M_day</ci>
            <apply>
               <times/>
			   <apply>
                  <plus/>
                  <ci>kb</ci>
				  <apply>
                     <times/>
					 <ci>kinc</ci>
			         <apply>
                        <minus/>
				        <ci>T_day</ci>
						<ci>T_b</ci>
				     </apply>
				  </apply>
			   </apply>
			   <apply>
                  <minus/>
				  <ci>T_day</ci>
			      <ci>T_a</ci>
			   </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="M_night">
      <variable units="W_per_kg" public_interface="out" name="M_night"/>
    
	  <variable units="W_per_kg_C2" public_interface="in" name="kinc"/>
      <variable units="W_per_kg_C" public_interface="in" name="kb"/>
	  <variable units="celsius" public_interface="in" name="T_b"/>
      <variable units="celsius" public_interface="in" name="T_a"/>
	  <variable units="celsius" public_interface="in" name="T_night"/>
	
      <math xmlns="http://www.w3.org/1998/Math/MathML" id="9"> 
         <apply>
            <eq/>
            <ci>M_night</ci>
            <apply>
               <times/>
			   <apply>
                  <plus/>
                  <ci>kb</ci>
				  <apply>
                     <times/>
					 <ci>kinc</ci>
			         <apply>
                        <minus/>
				        <ci>T_night</ci>
						<ci>T_b</ci>
				     </apply>
				  </apply>
			   </apply>
			   <apply>
                  <minus/>
				  <ci>T_night</ci>
			      <ci>T_a</ci>
			   </apply>
            </apply>
         </apply>
      </math>
   </component>
 
 
   <connection>
      <map_components component_2="environment" component_1="M_c"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="environment" component_1="M"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="environment" component_1="T"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="M_c" component_1="M_day"/>
      <map_variables variable_2="M_day" variable_1="M_day"/>
   </connection>
   
   <connection>
      <map_components component_2="M_c" component_1="M_night"/>
      <map_variables variable_2="M_night" variable_1="M_night"/>
   </connection>
   
   <connection>
      <map_components component_2="M" component_1="M_c"/>
      <map_variables variable_2="M_c" variable_1="M_c"/>
   </connection>
   
   <connection>
      <map_components component_2="T" component_1="M"/>
      <map_variables variable_2="M" variable_1="M"/>
   </connection>
   
   <connection>
      <map_components component_2="T" component_1="model_parameters"/>
      <map_variables variable_2="T_a" variable_1="T_a"/>
   </connection>
   
   <connection>
      <map_components component_2="T" component_1="k"/>
      <map_variables variable_2="T" variable_1="T"/>
	  <map_variables variable_2="k" variable_1="k"/>
   </connection>
   
   <connection>
      <map_components component_2="k" component_1="kb"/>
      <map_variables variable_2="kb" variable_1="kb"/>
   </connection>
   
   <connection>
      <map_components component_2="k" component_1="model_parameters"/>
      <map_variables variable_2="T_b" variable_1="T_b"/>
	  <map_variables variable_2="kinc" variable_1="kinc"/>
   </connection>
   
   <connection>
      <map_components component_2="T_day" component_1="model_parameters"/>
      <map_variables variable_2="T_b" variable_1="T_b"/>
	  <map_variables variable_2="delta_T" variable_1="delta_T"/>
   </connection>
   
   <connection>
      <map_components component_2="T_night" component_1="model_parameters"/>
      <map_variables variable_2="T_b" variable_1="T_b"/>
	  <map_variables variable_2="delta_T" variable_1="delta_T"/>
   </connection>
   
   <connection>
      <map_components component_2="kb" component_1="model_parameters"/>
      <map_variables variable_2="T_b" variable_1="T_b"/>
	  <map_variables variable_2="T_a" variable_1="T_a"/>
   </connection>
   
   <connection>
      <map_components component_2="M_day" component_1="kb"/>
      <map_variables variable_2="kb" variable_1="kb"/>
   </connection>
   
   <connection>
      <map_components component_2="M_day" component_1="T_day"/>
      <map_variables variable_2="T_day" variable_1="T_day"/>
   </connection>
   
   <connection>
      <map_components component_2="M_day" component_1="model_parameters"/>
      <map_variables variable_2="T_a" variable_1="T_a"/>
	  <map_variables variable_2="T_b" variable_1="T_b"/>
	  <map_variables variable_2="kinc" variable_1="kinc"/>
   </connection>
   
   <connection>
      <map_components component_2="M_night" component_1="kb"/>
      <map_variables variable_2="kb" variable_1="kb"/>
   </connection>
   
   <connection>
      <map_components component_2="M_night" component_1="T_night"/>
      <map_variables variable_2="T_night" variable_1="T_night"/>
   </connection>
   
   <connection>
      <map_components component_2="M_night" component_1="model_parameters"/>
      <map_variables variable_2="T_a" variable_1="T_a"/>
	  <map_variables variable_2="T_b" variable_1="T_b"/>
	  <map_variables variable_2="kinc" variable_1="kinc"/>
   </connection>
   
   <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
    <foo xmlns="http://www.example.org/foo/bar/baz" />
    <!--
      The following RDF block contains metadata that applies to this document
      as a whole, as indicated by the empty about attribute on the 
      <rdf:Description> element.
    -->
    <rdf:Description rdf:about="">
      <!--
        The Model Builder Metadata.  The Dublin Core "creator" element is used  
        to indicate the person who translated the model into CellML.
      -->
	  <dc:title>PKPD model of interleukin-21 effects on thermoregulation in monkeys (Baseline)</dc:title>
      <dc:creator rdf:parseType="Resource">
        <vCard:N rdf:parseType="Resource">
          <vCard:Family>Lloyd</vCard:Family>
          <vCard:Given>Catherine</vCard:Given>
		  <vCard:Other>May</vCard:Other>
        </vCard:N>
        <vCard:EMAIL rdf:parseType="Resource">
          <rdf:value>c.lloyd@auckland@auckland.ac.nz</rdf:value>
          <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
        </vCard:EMAIL>
        <vCard:ORG rdf:parseType="Resource">
          <vCard:Orgname>The University of Auckland</vCard:Orgname>
          <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
        </vCard:ORG>
      </dc:creator>
      
      <!--
        The Creation Date metadata. This is the date on which the model
        was translated into CellML.
      -->
      <dcterms:created rdf:parseType="Resource">
        <dcterms:W3CDTF>2009-10-20</dcterms:W3CDTF>
      </dcterms:created>
      
      <!--
        The Modification History metadata. This lists the changes that have been
        made to the document, who made the changes, and when they were made.
      -->
     
    </rdf:Description>
    
    <!--
      The following metadata refers to the model itself, as indicated by the
      reference to the ID "overgaard_baseline_2007", which is    
      declared on the <model> element.
    -->
    <rdf:Description rdf:about="#overgaard_baseline_2007">
      <!-- A human readable name for the model. -->
      <dc:title>
        The Overgaard et al. 2007 PKPD model of the effects of IL_21 on thermoregulation in monkeys
      </dc:title>
      
      <!-- A comment regarding the model. -->
      <cmeta:comment rdf:parseType="Resource">
        <rdf:value>
          This is the CellML description of Overgaard et al.'s PKPD model of the effects of IL_21 on thermoregulation in monkeys
        </rdf:value>
        <!-- The creator of the comment. -->
        <dc:creator rdf:parseType="Resource">
          <vCard:FN>Catherine Lloyd</vCard:FN>
        </dc:creator>
      </cmeta:comment>
      
	  <cmeta:species>Monkey</cmeta:species>
      
      <!--  Keyword(s) -->
      <bqs:reference rdf:parseType="Resource">
        <dc:subject rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>PKPD</rdf:li>
			  <rdf:li>metabolism</rdf:li>
			  <rdf:li>thermoregulation</rdf:li>
			  <rdf:li>immunomodulation</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>

      <bqs:reference rdf:parseType="Resource">
        <bqs:Pubmed_id>17009101</bqs:Pubmed_id>
        <bqs:JournalArticle rdf:parseType="Resource">
          <dc:creator>
            <rdf:Seq>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Overgaard</vCard:Family>
                    <vCard:Given>Rune</vCard:Given>
					<vCard:Other>Viig</vCard:Other>
                  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Holford</vCard:Family>
                    <vCard:Given>Nick</vCard:Given>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Rytved</vCard:Family>
                    <vCard:Given>Klaus</vCard:Given>
					<vCard:Other>A</vCard:Other>
                  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Madsen</vCard:Family>
                    <vCard:Given>Henrik</vCard:Given>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
            </rdf:Seq>
          </dc:creator>
          <dc:title>
            PKPD model of interleukin-21 effects on thermoregulation in monkeys--application and evaluation of stochastic differential equations
          </dc:title>
          <dcterms:issued rdf:parseType="Resource">
            <dcterms:W3CDTF>2007-02</dcterms:W3CDTF>
          </dcterms:issued>
          <bqs:Journal rdf:parseType="Resource">
            <dc:title>Pharmaceutical Research</dc:title>
          </bqs:Journal>
		  <bqs:volume>24</bqs:volume>
          <bqs:first_page>298</bqs:first_page>
          <bqs:last_page>309</bqs:last_page>
        </bqs:JournalArticle>
      </bqs:reference>
    </rdf:Description>
  </rdf:RDF>
   
</model>


