// This CellML file was generated on 27/04/2010 at 11:06:52 at a.m. using:
//
// COR (0.9.31.1371)
// Copyright 2002-2010 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// creator: Family Nunns; Given Geoffrey; Other Rogan; gnunns1@jhu.edu; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2010-04-27
// title: The Ralser et al. 2007 model of dynamic rerouting of carbohydrate flux.
// reference: Family Ralser; Given Markus; Family Wamelink; Given Mirjam; Other M; Family Kowald; Given Axel; Family Gerisch; Given Birgit; Family Heeren; Given Gino; Family Struys; Given Eduard; Other A; Family Klipp; Given Edda; Family Jakobs; Given Cornelis; Family Breitenbach; Given Michael; Family Lehrach; Given Hans; Family Krobitsch; Given Sylvia; title Dynamic rerouting of the carbohydrate flux is key to counteracting oxidative stress; W3CDTF 2007-10-12; first_page 1; title Journal of Biology; volume 6; last_page 18; Pubmed_id 18154684
// reference: subject_type keyword; _1 metabolism
// species: Caenorhabditis elegans
// comment: FN Geoffrey Nunns; This is the CellML description of Ralser et al.'s 2007 mathematical model of dynamic rerouting of carbohydrate flux.
// simulation: endingValue 10; pointDensity 10000; maximumStepSize 0.1
def model ralser_2007 as
  // Dynamic rerouting of the carbohydrate flux is key to counteracting oxidative stress
  //
  // Geoffrey Nunns
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in COR and OpenCell and the units are consistent throughout. It reproduces the published results and was converted from SBML with the help of Lukas Endler.
  //
  // Model Structure
  //
  // ABSTRACT: BACKGROUND: Eukaryotic cells have evolved various response mechanisms to counteract the deleterious consequences of oxidative stress. Among these processes, metabolic alterations seem to play an important role. RESULTS: We recently discovered that yeast cells with reduced activity of the key glycolytic enzyme triosephosphate isomerase exhibit an increased resistance to the thiol-oxidizing reagent diamide. Here we show that this phenotype is conserved in Caenorhabditis elegans and that the underlying mechanism is based on a redirection of the metabolic flux from glycolysis to the pentose phosphate pathway, altering the redox equilibrium of the cytoplasmic NADP(H) pool. Remarkably, another key glycolytic enzyme, glyceraldehyde-3-phosphate dehydrogenase (GAPDH), is known to be inactivated in response to various oxidant treatments, and we show that this provokes a similar redirection of the metabolic flux. CONCLUSION: The naturally occurring inactivation of GAPDH functions as a metabolic switch for rerouting the carbohydrate flux to counteract oxidative stress. As a consequence, altering the homoeostasis of cytoplasmic metabolites is a fundamental mechanism for balancing the redox state of eukaryotic cells under stress conditions.
  //
  // The original paper reference is cited below:
  //
  // Dynamic rerouting of the carbohydrate flux is key to counteracting oxidative stress, Markus Ralser, Mirjam M Wamelink, Axel Kowald, Birgit Gerisch, Gino Heeren, Eduard A Struys, Edda Klipp, Cornelis Jakobs, Michael Breitenbach, Hans Lehrach and Sylvia Krobitsch, 2007, Journal of Biology, volume 6, 1-18. PubMed ID: 18154684 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=18154684&query_hl=1&itool=pubmed_docsum)
  //
  // model diagram
  //
  // Schematic diagram of the reactions included in the mathematical model to study the effects of a diminished TPI or GAPDH activity on the flux through glycolysis and the pentose phosphate pathway. Substances with a dashed outline are assumed to have a constant concentration
  def unit mmol as
    unit mole {pref: milli};
  enddef;
  def unit mM as
    unit mmol;
    unit liter {expo: -1};
  enddef;
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit mM_per_min as
    unit mM;
    unit minute {expo: -1};
  enddef;
  def unit mmol_per_min as
    unit mmol;
    unit minute {expo: -1};
  enddef;
  def unit mmol_mM2_per_minute as
    unit mmol;
    unit mM {expo: 2};
    unit minute {expo: -1};
  enddef;
  def unit mM2 as
    unit mM {expo: 2};
  enddef;
  def unit per_min as
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  def comp parameters as
    var k_rel_TPI: dimensionless {init: 1, pub: out};
    var k_rel_GAPDH: dimensionless {init: 1, pub: out};
    var SUMAXP: mM {init: 4.1, pub: out};
  enddef;

  def comp extracellular as
    var CO2: mM {init: 1, pub: out};
    var ETOH: mM {init: 50, pub: out};
    var SUCC: mM {init: 0.1, pub: out};
    var GLY: mM {init: 0.15, pub: out};
    var GLCo: mM {init: 50, pub: out};
  enddef;

  def comp cytoplasm as
    var cytoplasm: liter {init: 1, pub: out};
    var P: mM {init: 5, pub: out};
    var G6P: mM {init: 1.39, pub: out};
    var F6P: mM {init: 0.28, pub: out};
    var F16P: mM {init: 0.1, pub: out};
    var NADH: mM {init: 0.39, pub: out};
    var NAD: mM {init: 1.2, pub: out};
    var BPG: mM {init: 0.1, pub: out};
    var P3G: mM {init: 0.1, pub: out};
    var P2G: mM {init: 0.1, pub: out};
    var PEP: mM {init: 0.1, pub: out};
    var PYR: mM {init: 3.36, pub: out};
    var ACE: mM {init: 0.04, pub: out};
    var X: mM {init: 0.1, pub: out};
    var GA3P: mM {init: 0.05, pub: out};
    var DHAP: mM {init: 1, pub: out};
    var D6PGluconoLactone: mM {init: 0.1, pub: out};
    var D6PGluconate: mM {init: 0.1, pub: out};
    var NADP: mM {init: 0.4, pub: out};
    var NADPH: mM {init: 1.6, pub: out};
    var Ribulose5P: mM {init: 0.1, pub: out};
    var Ribose5P: mM {init: 0.1, pub: out};
    var Xyl5P: mM {init: 0.1, pub: out};
    var Seduhept7P: mM {init: 0.1, pub: out};
    var Erythrose4P: mM {init: 0, pub: out};
    var GLCi: mM {init: 0.087, pub: out};
    var F26BP: mM {init: 0.02, pub: out};
    var time: minute {pub: in};
    var vGLK: mmol_per_min {pub: in};
    var vPGI: mmol_per_min {pub: in};
    var vPFK: mmol_per_min {pub: in};
    var vALD: mmol_per_min {pub: in};
    var vG3PDH: mmol_per_min {pub: in};
    var vGAPDH: mmol_per_min {pub: in};
    var vPGK: mmol_per_min {pub: in};
    var vPGM: mmol_per_min {pub: in};
    var vENO: mmol_per_min {pub: in};
    var vPYK: mmol_per_min {pub: in};
    var vPDC: mmol_per_min {pub: in};
    var vSUC: mmol_per_min {pub: in};
    var vADH: mmol_per_min {pub: in};
    var vATP: mmol_per_min {pub: in};
    var vTPI: mmol_per_min {pub: in};
    var vG6PDH: mmol_per_min {pub: in};
    var v6PGL: mmol_per_min {pub: in};
    var vGluDH: mmol_per_min {pub: in};
    var vPPI: mmol_per_min {pub: in};
    var vTransk1: mmol_per_min {pub: in};
    var vR5PI: mmol_per_min {pub: in};
    var vTransald: mmol_per_min {pub: in};
    var vTransk2: mmol_per_min {pub: in};
    var vNADPH: mmol_per_min {pub: in};
    var vGLT: mmol_per_min {pub: in};
    ode(P, time) = (vPGK-(vGLK+vPFK)+vPYK-vATP)/cytoplasm;
    ode(G6P, time) = (vGLK-vPGI-vG6PDH)/cytoplasm;
    ode(F6P, time) = (vPGI-vPFK+vTransald+vTransk2)/cytoplasm;
    ode(F16P, time) = (vPFK-vALD)/cytoplasm;
    ode(NADH, time) = (vGAPDH-vG3PDH+3{dimensionless}*vSUC-vADH)/cytoplasm;
    ode(NAD, time) = (vG3PDH-vGAPDH-3{dimensionless}*vSUC+vADH)/cytoplasm;
    ode(BPG, time) = (vGAPDH-vPGK)/cytoplasm;
    ode(P3G, time) = (vPGK-vPGM)/cytoplasm;
    ode(P2G, time) = (vPGM-vENO)/cytoplasm;
    ode(PEP, time) = (vENO-vPYK)/cytoplasm;
    ode(PYR, time) = (vPYK-vPDC)/cytoplasm;
    ode(ACE, time) = (vPDC-2{dimensionless}*vSUC-vADH)/cytoplasm;
    ode(GA3P, time) = (vALD-vGAPDH-vTPI+vTransk1-vTransald+vTransk2)/cytoplasm;
    ode(DHAP, time) = (vALD-vG3PDH+vTPI)/cytoplasm;
    ode(D6PGluconoLactone, time) = (vG6PDH-v6PGL)/cytoplasm;
    ode(D6PGluconate, time) = (v6PGL-vGluDH)/cytoplasm;
    ode(NADP, time) = (vNADPH-(vG6PDH+vGluDH))/cytoplasm;
    ode(NADPH, time) = (vG6PDH+vGluDH-vNADPH)/cytoplasm;
    ode(Ribulose5P, time) = (vGluDH-vPPI-vR5PI)/cytoplasm;
    ode(Ribose5P, time) = (vPPI-vTransk1)/cytoplasm;
    ode(Xyl5P, time) = (vR5PI-vTransk1-vTransk2)/cytoplasm;
    ode(Seduhept7P, time) = (vTransk1-vTransald)/cytoplasm;
    ode(Erythrose4P, time) = (vTransald-vTransk2)/cytoplasm;
    ode(GLCi, time) = (vGLT-vGLK)/cytoplasm;
  enddef;

  def comp rules as
    var ratio_NADPH_NADP: dimensionless;
    var NADP: mM {pub: in};
    var NADPH: mM {pub: in};
    ratio_NADPH_NADP = NADPH/NADP;
  enddef;

  def comp vGLK as
    var vGLK: mmol_per_min {pub: out};
    var VmGLK: mM_per_min {init: 226.452};
    var KeqAK: dimensionless {init: 0.45};
    var KeqGLK: dimensionless {init: 3800};
    var KmGLKATP: mM {init: 0.15};
    var KmGLKGLCi: mM {init: 0.08};
    var KmGLKG6P: mM {init: 30};
    var KmGLKADP: mM {init: 0.23};
    var cytoplasm: liter {pub: in};
    var G6P: mM {pub: in};
    var GLCi: mM {pub: in};
    var P: mM {pub: in};
    var SUMAXP: mM {pub: in};
    vGLK = cytoplasm*VmGLK*(-G6P*(SUMAXP-sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))/((1{dimensionless}-4{dimensionless}*KeqAK)*KeqGLK)+GLCi*(-SUMAXP+P-4{dimensionless}*KeqAK*P+sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))/(2{dimensionless}-8{dimensionless}*KeqAK))/(KmGLKATP*KmGLKGLCi*(1{dimensionless}+G6P/KmGLKG6P+GLCi/KmGLKGLCi)*(1{dimensionless}+(SUMAXP-sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))/((1{dimensionless}-4{dimensionless}*KeqAK)*KmGLKADP)+(-SUMAXP+P-4{dimensionless}*KeqAK*P+sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))/((2{dimensionless}-8{dimensionless}*KeqAK)*KmGLKATP)));
  enddef;

  def comp vPGI as
    var vPGI: mmol_per_min {pub: out};
    var VmPGI: mM_per_min {init: 339.677};
    var KmPGIG6P: mM {init: 1.4};
    var KeqPGI: dimensionless {init: 0.314};
    var KmPGIF6P: mM {init: 0.3};
    var cytoplasm: liter {pub: in};
    var G6P: mM {pub: in};
    var F6P: mM {pub: in};
    vPGI = cytoplasm*VmPGI/KmPGIG6P*(G6P-F6P/KeqPGI)/(1{dimensionless}+G6P/KmPGIG6P+F6P/KmPGIF6P);
  enddef;

  def comp vPFK as
    var vPFK: mmol_per_min {pub: out};
    var numerator1: mmol_mM2_per_minute;
    var numerator2: dimensionless;
    var denominator: mM2;
    var denom1: dimensionless;
    var denom2: dimensionless;
    var denom3: dimensionless;
    var gR: dimensionless {init: 5.12};
    var VmPFK: mM_per_min {init: 182.903};
    var KeqAK: dimensionless {init: 0.45};
    var KmPFKF6P: mM {init: 0.1};
    var KmPFKATP: mM {init: 0.71};
    var L0: dimensionless {init: 0.66};
    var CPFKF26BP: dimensionless {init: 0.0174};
    var KPFKF26BP: mM {init: 0.000682};
    var CPFKF16BP: dimensionless {init: 0.397};
    var KPFKF16BP: mM {init: 0.111};
    var CPFKAMP: dimensionless {init: 0.0845};
    var KPFKAMP: mM {init: 0.0995};
    var CiPFKATP: dimensionless {init: 100};
    var KiPFKATP: mM {init: 0.65};
    var CPFKATP: dimensionless {init: 3};
    var cytoplasm: liter {pub: in};
    var F16P: mM {pub: in};
    var F26BP: mM {pub: in};
    var F6P: mM {pub: in};
    var P: mM {pub: in};
    var DHAP: mM {pub: in};
    var SUMAXP: mM {pub: in};
    numerator1 = cytoplasm*gR*VmPFK*F6P*(-SUMAXP+P-4{dimensionless}*KeqAK*P+sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)));
    numerator2 = 1{dimensionless}+F6P/KmPFKF6P+(-SUMAXP+P-4{dimensionless}*KeqAK*P+sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))/((2{dimensionless}-8{dimensionless}*KeqAK)*KmPFKATP)+gR*F6P*(-SUMAXP+P-4{dimensionless}*KeqAK*P+sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))/((2{dimensionless}-8{dimensionless}*KeqAK)*KmPFKATP*KmPFKF6P);
    denominator = (2{dimensionless}-8{dimensionless}*KeqAK)*KmPFKATP*KmPFKF6P*(L0*denom1*denom2/denom3+sqr(1{dimensionless}+F6P/KmPFKF6P+(-SUMAXP+P-4{dimensionless}*KeqAK*P+sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))/((2{dimensionless}-8{dimensionless}*KeqAK)*KmPFKATP)+gR*F6P*(-SUMAXP+P-4{dimensionless}*KeqAK*P+sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))/((2{dimensionless}-8{dimensionless}*KeqAK)*KmPFKATP*KmPFKF6P)));
    denom1 = sqr(1{dimensionless}+CPFKF26BP*F26BP/KPFKF26BP+CPFKF16BP*F16P/KPFKF16BP)*sqr(1{dimensionless}+2{dimensionless}*CPFKAMP*KeqAK*sqr(SUMAXP-sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))/((-1{dimensionless}+4{dimensionless}*KeqAK)*KPFKAMP*(SUMAXP-P+4{dimensionless}*KeqAK*P-sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))));
    denom2 = sqr(1{dimensionless}+CiPFKATP*(-SUMAXP+P-4{dimensionless}*KeqAK*P+sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))/((2{dimensionless}-8{dimensionless}*KeqAK)*KiPFKATP))*sqr(1{dimensionless}+CPFKATP*(-SUMAXP+P-4{dimensionless}*KeqAK*P+sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))/((2{dimensionless}-8{dimensionless}*KeqAK)*KmPFKATP));
    denom3 = sqr(1{dimensionless}+F26BP/KPFKF26BP+F16P/KPFKF16BP)*sqr(1{dimensionless}+2{dimensionless}*KeqAK*sqr(SUMAXP-sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))/((-1{dimensionless}+4{dimensionless}*KeqAK)*KPFKAMP*(SUMAXP-P+4{dimensionless}*KeqAK*P-sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))))*sqr(1{dimensionless}+(-SUMAXP+P-4{dimensionless}*KeqAK*P+sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))/((2{dimensionless}-8{dimensionless}*KeqAK)*KiPFKATP));
    vPFK = numerator1*numerator2/denominator;
  enddef;

  def comp vALD as
    var vALD: mmol_per_min {pub: out};
    var VmALD: mM_per_min {init: 322.258};
    var KeqTPI: dimensionless {init: 0.045};
    var KeqALD: mM {init: 0.069};
    var KmALDF16P: mM {init: 0.3};
    var KmALDDHAP: mM {init: 2.4};
    var KmALDGAP: mM {init: 2};
    var KmALDGAPi: mM {init: 10};
    var cytoplasm: liter {pub: in};
    var F16P: mM {pub: in};
    var GA3P: mM {pub: in};
    var DHAP: mM {pub: in};
    vALD = cytoplasm*VmALD*F16P/KmALDF16P*(1{dimensionless}-DHAP*GA3P/(F16P*KeqALD))/(1{dimensionless}+F16P/KmALDF16P+DHAP/KmALDDHAP+GA3P/KmALDGAP+F16P*GA3P/(KmALDF16P*KmALDGAPi)+DHAP*GA3P/(KmALDDHAP*KmALDGAP));
  enddef;

  def comp vG3PDH as
    var vG3PDH: mmol_per_min {pub: out};
    var VmG3PDH: mM_per_min {init: 70.15};
    var KeqG3PDH: dimensionless {init: 4300};
    var KeqTPI: dimensionless {init: 0.045};
    var KmG3PDHDHAP: mM {init: 0.4};
    var KmG3PDHNADH: mM {init: 0.023};
    var KmG3PDHNAD: mM {init: 0.93};
    var KmG3PDHGLY: mM {init: 1};
    var cytoplasm: liter {pub: in};
    var GLY: mM {pub: in};
    var NAD: mM {pub: in};
    var NADH: mM {pub: in};
    var DHAP: mM {pub: in};
    vG3PDH = cytoplasm*VmG3PDH*(-GLY*NAD/KeqG3PDH+NADH*DHAP/(1{dimensionless}+KeqTPI))/(KmG3PDHDHAP*KmG3PDHNADH*(1{dimensionless}+NAD/KmG3PDHNAD+NADH/KmG3PDHNADH)*(1{dimensionless}+GLY/KmG3PDHGLY+DHAP/((1{dimensionless}+KeqTPI)*KmG3PDHDHAP)));
  enddef;

  def comp vGAPDH as
    var vGAPDH: mmol_per_min {pub: out};
    var VmGAPDHr: mM_per_min {init: 6549.68};
    var KmGAPDHBPG: mM {init: 0.0098};
    var KmGAPDHNADH: mM {init: 0.06};
    var KeqTPI: dimensionless {init: 0.045};
    var VmGAPDHf: mM_per_min {init: 1184.52};
    var KmGAPDHGAP: mM {init: 0.21};
    var KmGAPDHNAD: mM {init: 0.09};
    var KeqGAPDH: dimensionless {init: 0.005};
    var cytoplasm: liter {pub: in};
    var BPG: mM {pub: in};
    var GA3P: mM {pub: in};
    var NAD: mM {pub: in};
    var NADH: mM {pub: in};
    var k_rel_GAPDH: dimensionless {pub: in};
    vGAPDH = cytoplasm*k_rel_GAPDH*VmGAPDHf*GA3P*NAD/(KmGAPDHGAP*KmGAPDHNAD)*(1{dimensionless}-BPG*NADH/(GA3P*NAD*KeqGAPDH))/((1{dimensionless}+GA3P/KmGAPDHGAP+BPG/KmGAPDHBPG)*(1{dimensionless}+NAD/KmGAPDHNAD+NADH/KmGAPDHNADH));
  enddef;

  def comp vPGK as
    var vPGK: mmol_per_min {pub: out};
    var VmPGK: mM_per_min {init: 1306.45};
    var KeqPGK: dimensionless {init: 3200};
    var KeqAK: dimensionless {init: 0.45};
    var KmPGKATP: mM {init: 0.3};
    var KmPGKP3G: mM {init: 0.53};
    var KmPGKADP: mM {init: 0.2};
    var KmPGKBPG: mM {init: 0.003};
    var cytoplasm: liter {pub: in};
    var BPG: mM {pub: in};
    var P: mM {pub: in};
    var P3G: mM {pub: in};
    var SUMAXP: mM {pub: in};
    vPGK = 1{dimensionless}*cytoplasm*VmPGK*(KeqPGK*BPG*(SUMAXP-sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))/(1{dimensionless}-4{dimensionless}*KeqAK)-(-SUMAXP+P-4{dimensionless}*KeqAK*P+sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))*P3G/(2{dimensionless}-8{dimensionless}*KeqAK))/(KmPGKATP*KmPGKP3G*(1{dimensionless}+(SUMAXP-sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))/((1{dimensionless}-4{dimensionless}*KeqAK)*KmPGKADP)+(-SUMAXP+P-4{dimensionless}*KeqAK*P+sqrt(sqr(SUMAXP)-2{dimensionless}*SUMAXP*P+8{dimensionless}*KeqAK*SUMAXP*P+sqr(P)-4{dimensionless}*KeqAK*sqr(P)))/((2{dimensionless}-8{dimensionless}*KeqAK)*KmPGKATP))*(1{dimensionless}+BPG/KmPGKBPG+P3G/KmPGKP3G));
  enddef;

  def comp vPGM as
    var vPGM: mmol_per_min {pub: out};
    var VmPGM: mM_per_min {init: 2525.81};
    var KmPGMP3G: mM {init: 1.2};
    var KeqPGM: dimensionless {init: 0.19};
    var KmPGMP2G: mM {init: 0.08};
    var cytoplasm: liter {pub: in};
    var P2G: mM {pub: in};
    var P3G: mM {pub: in};
    vPGM = cytoplasm*VmPGM/KmPGMP3G*(P3G-P2G/KeqPGM)/(1{dimensionless}+P3G/KmPGMP3G+P2G/KmPGMP2G);
  enddef;

  def comp vENO as
    var vENO: mmol_per_min {pub: out};
    var VmENO: mM_per_min {init: 365.806};
    var KmENOP2G: mM {init: 0.04};
    var KeqENO: dimensionless {init: 6.7};
    var KmENOPEP: mM {init: 0.5};
    var cytoplasm: liter {pub: in};
    var P2G: mM {pub: in};
    var PEP: mM {pub: in};
    vENO = cytoplasm*VmENO/KmENOP2G*(P2G-PEP/KeqENO)/(1{dimensionless}+P2G/KmENOP2G+PEP/KmENOPEP);
  enddef;

  def comp vPYK as
    var vPYK: mmol_per_min {pub: out};
    var VmPYK: mM_per_min {init: 1088.71};
    var KmPYKPEP: mM {init: 0.14};
    var KmPYKADP: mM {init: 0.53};
    var KeqAK: dimensionless {init: 0.45};
    var KeqPYK: dimensionless {init: 6500};
    var KmPYKPYR: mM {init: 21};
    var KmPYKATP: mM {init: 1.5};
    var cytoplasm: liter {pub: in};
    var PEP: mM {pub: in};
    var P: mM {pub: in};
    var PYR: mM {pub: in};
    var SUMAXP: mM {pub: in};
    vPYK = cytoplasm*VmPYK/(KmPYKPEP*KmPYKADP)*(PEP*(SUMAXP-sqrt(sqr(P)-4{dimensionless}*KeqAK*sqr(P)-2{dimensionless}*P*SUMAXP+8{dimensionless}*KeqAK*P*SUMAXP+sqr(SUMAXP)))/(1{dimensionless}-4{dimensionless}*KeqAK)-PYR*(P-4{dimensionless}*KeqAK*P-SUMAXP+sqrt(sqr(P)-4{dimensionless}*KeqAK*sqr(P)-2{dimensionless}*P*SUMAXP+8{dimensionless}*KeqAK*P*SUMAXP+sqr(SUMAXP)))/(2{dimensionless}-8{dimensionless}*KeqAK)/KeqPYK)/((1{dimensionless}+PEP/KmPYKPEP+PYR/KmPYKPYR)*(1{dimensionless}+(P-4{dimensionless}*KeqAK*P-SUMAXP+sqrt(sqr(P)-4{dimensionless}*KeqAK*sqr(P)-2{dimensionless}*P*SUMAXP+8{dimensionless}*KeqAK*P*SUMAXP+sqr(SUMAXP)))/(2{dimensionless}-8{dimensionless}*KeqAK)/KmPYKATP+(SUMAXP-sqrt(sqr(P)-4{dimensionless}*KeqAK*sqr(P)-2{dimensionless}*P*SUMAXP+8{dimensionless}*KeqAK*P*SUMAXP+sqr(SUMAXP)))/(1{dimensionless}-4{dimensionless}*KeqAK)/KmPYKADP));
  enddef;

  def comp vPDC as
    var vPDC: mmol_per_min {pub: out};
    var VmPDC: mM_per_min {init: 174.194};
    var nPDC: dimensionless {init: 1.9};
    var KmPDCPYR: mM {init: 4.33};
    var cytoplasm: liter {pub: in};
    var PYR: mM {pub: in};
    vPDC = cytoplasm*VmPDC*pow(PYR, nPDC)/pow(KmPDCPYR, nPDC)/(1{dimensionless}+pow(PYR, nPDC)/pow(KmPDCPYR, nPDC));
  enddef;

  def comp vSUC as
    var vSUC: mmol_per_min {pub: out};
    var KSUCC: per_min {init: 21.4};
    var cytoplasm: liter {pub: in};
    var ACE: mM {pub: in};
    vSUC = cytoplasm*KSUCC*ACE;
  enddef;

  def comp vADH as
    var vADH: mmol_per_min {pub: out};
    var VmADH: mM_per_min {init: 810};
    var KiADHNAD: mM {init: 0.92};
    var KmADHETOH: mM {init: 17};
    var KeqADH: dimensionless {init: 6.9e-5};
    var KmADHNAD: mM {init: 0.17};
    var KmADHNADH: mM {init: 0.11};
    var KiADHNADH: mM {init: 0.031};
    var KmADHACE: mM {init: 1.11};
    var KiADHACE: mM {init: 1.1};
    var KiADHETOH: mM {init: 90};
    var cytoplasm: liter {pub: in};
    var ACE: mM {pub: in};
    var ETOH: mM {pub: in};
    var NAD: mM {pub: in};
    var NADH: mM {pub: in};
    vADH = cytoplasm*(-VmADH)/(KiADHNAD*KmADHETOH)*(NAD*ETOH-NADH*ACE/KeqADH)/(1{dimensionless}+NAD/KiADHNAD+KmADHNAD*ETOH/(KiADHNAD*KmADHETOH)+KmADHNADH*ACE/(KiADHNADH*KmADHACE)+NADH/KiADHNADH+NAD*ETOH/(KiADHNAD*KmADHETOH)+KmADHNADH*NAD*ACE/(KiADHNAD*KiADHNADH*KmADHACE)+KmADHNAD*ETOH*NADH/(KiADHNAD*KmADHETOH*KiADHNADH)+NADH*ACE/(KiADHNADH*KmADHACE)+NAD*ETOH*ACE/(KiADHNAD*KmADHETOH*KiADHACE)+ETOH*NADH*ACE/(KiADHETOH*KiADHNADH*KmADHACE));
  enddef;

  def comp vATP as
    var vATP: mmol_per_min {pub: out};
    var KATPASE: per_min {init: 39.5};
    var KeqAK: dimensionless {init: 0.45};
    var cytoplasm: liter {pub: in};
    var P: mM {pub: in};
    var SUMAXP: mM {pub: in};
    vATP = cytoplasm*KATPASE*(P-4{dimensionless}*KeqAK*P-SUMAXP+sqrt(sqr(P)-4{dimensionless}*KeqAK*sqr(P)-2{dimensionless}*P*SUMAXP+8{dimensionless}*KeqAK*P*SUMAXP+sqr(SUMAXP)))/(2{dimensionless}-8{dimensionless}*KeqAK);
  enddef;

  def comp vTPI as
    var vTPI: mmol_per_min {pub: out};
    var KmGA3P: mM {init: 1.27};
    var KmDHAP: mM {init: 1.23};
    var VmDHAP: mM_per_min {init: 10900};
    var VmGA3P: mM_per_min {init: 555};
    var cytoplasm: liter {pub: in};
    var DHAP: mM {pub: in};
    var GA3P: mM {pub: in};
    var k_rel_TPI: dimensionless {pub: in};
    vTPI = cytoplasm*k_rel_TPI*(VmDHAP*GA3P/KmGA3P-VmGA3P*DHAP/KmDHAP)/(1{dimensionless}+GA3P/KmGA3P+DHAP/KmDHAP);
  enddef;

  def comp vG6PDH as
    var vG6PDH: mmol_per_min {pub: out};
    var VmG6PDH: mM_per_min {init: 4};
    var KmG6P: mM {init: 0.04};
    var KmNADP: mM {init: 0.02};
    var KiNADPH: mM {init: 0.017};
    var cytoplasm: liter {pub: in};
    var G6P: mM {pub: in};
    var NADP: mM {pub: in};
    var NADPH: mM {pub: in};
    vG6PDH = cytoplasm*VmG6PDH*G6P*NADP/(KmG6P*KmNADP)/((1{dimensionless}+G6P/KmG6P+NADPH/KiNADPH)*(1{dimensionless}+NADP/KmNADP));
  enddef;

  def comp v6PGL as
    var v6PGL: mmol_per_min {pub: out};
    var Vm6PGL: mM_per_min {init: 4};
    var Km6PGL: mM {init: 0.8};
    var cytoplasm: liter {pub: in};
    var D6PGluconoLactone: mM {pub: in};
    v6PGL = cytoplasm*Vm6PGL*D6PGluconoLactone/(Km6PGL+D6PGluconoLactone);
  enddef;

  def comp vGluDH as
    var vGluDH: mmol_per_min {pub: out};
    var VmGluDH: mM_per_min {init: 4};
    var KmGluconate: mM {init: 0.02};
    var KmNADP: mM {init: 0.03};
    var KiNADPH: mM {init: 0.03};
    var cytoplasm: liter {pub: in};
    var D6PGluconate: mM {pub: in};
    var NADP: mM {pub: in};
    var NADPH: mM {pub: in};
    vGluDH = cytoplasm*VmGluDH*D6PGluconate*NADP/(KmGluconate*KmNADP)/((1{dimensionless}+D6PGluconate/KmGluconate+NADPH/KiNADPH)*(1{dimensionless}+NADP/KmNADP));
  enddef;

  def comp vPPI as
    var vPPI: mmol_per_min {pub: out};
    var VmPPIf: mM_per_min {init: 3458};
    var VmPPIr: mM_per_min {init: 3458};
    var KmRibu5P: mM {init: 1.6};
    var KmRibo5P: mM {init: 1.6};
    var cytoplasm: liter {pub: in};
    var Ribulose5P: mM {pub: in};
    var Ribose5P: mM {pub: in};
    vPPI = cytoplasm*(VmPPIf*Ribulose5P/KmRibu5P-VmPPIr*Ribose5P/KmRibo5P)/(1{dimensionless}+Ribulose5P/KmRibu5P+Ribose5P/KmRibo5P);
  enddef;

  def comp vTransk1 as
    var vTransk1: mmol_per_min {pub: out};
    var VmTransk1f: mM_per_min {init: 4};
    var VmTransk1r: mM_per_min {init: 2};
    var KmRibose5P: mM {init: 0.1};
    var KmXyl5P: mM {init: 0.15};
    var KmGA3P: mM {init: 0.1};
    var KmSeduhept: mM {init: 0.15};
    var cytoplasm: liter {pub: in};
    var GA3P: mM {pub: in};
    var Ribose5P: mM {pub: in};
    var Seduhept7P: mM {pub: in};
    var Xyl5P: mM {pub: in};
    vTransk1 = cytoplasm*(VmTransk1f*Ribose5P*Xyl5P/(KmRibose5P*KmXyl5P)-VmTransk1r*GA3P*Seduhept7P/(KmGA3P*KmSeduhept))/((1{dimensionless}+Ribose5P/KmRibose5P+GA3P/KmGA3P)*(1{dimensionless}+Xyl5P/KmXyl5P+Seduhept7P/KmSeduhept));
  enddef;

  def comp vR5PI as
    var vR5PI: mmol_per_min {pub: out};
    var VmR5PIf: mM_per_min {init: 1039};
    var VmR5PIr: mM_per_min {init: 1039};
    var KmRibu5P: mM {init: 1.5};
    var KmXyl: mM {init: 1.5};
    var cytoplasm: liter {pub: in};
    var Ribulose5P: mM {pub: in};
    var Xyl5P: mM {pub: in};
    vR5PI = cytoplasm*(VmR5PIf*Ribulose5P/KmRibu5P-VmR5PIr*Xyl5P/KmXyl)/(1{dimensionless}+Ribulose5P/KmRibu5P+Xyl5P/KmXyl);
  enddef;

  def comp vTransald as
    var vTransald: mmol_per_min {pub: out};
    var VmTransaldf: mM_per_min {init: 55};
    var VmTransaldr: mM_per_min {init: 10};
    var KmGA3P: mM {init: 0.22};
    var KmSeduhept: mM {init: 0.18};
    var KmF6P: mM {init: 0.32};
    var KmEry4P: mM {init: 0.018};
    var cytoplasm: liter {pub: in};
    var Erythrose4P: mM {pub: in};
    var F6P: mM {pub: in};
    var Seduhept7P: mM {pub: in};
    var GA3P: mM {pub: in};
    vTransald = cytoplasm*(VmTransaldf*GA3P*Seduhept7P/(KmGA3P*KmSeduhept)-VmTransaldr*F6P*Erythrose4P/(KmF6P*KmEry4P))/((1{dimensionless}+GA3P/KmGA3P+F6P/KmF6P)*(1{dimensionless}+Seduhept7P/KmSeduhept+Erythrose4P/KmEry4P));
  enddef;

  def comp vTransk2 as
    var vTransk2: mmol_per_min {pub: out};
    var VmTransk2f: mM_per_min {init: 3.2};
    var VmTransk2r: mM_per_min {init: 43};
    var KmXyl5P: mM {init: 0.16};
    var KmEry4P: mM {init: 0.09};
    var KmF6P: mM {init: 1.1};
    var KmGA3P: mM {init: 2.1};
    var cytoplasm: liter {pub: in};
    var Erythrose4P: mM {pub: in};
    var F6P: mM {pub: in};
    var Xyl5P: mM {pub: in};
    var GA3P: mM {pub: in};
    vTransk2 = cytoplasm*(VmTransk2f*Erythrose4P*Xyl5P/(KmEry4P*KmXyl5P)-VmTransk2r*F6P*GA3P/(KmF6P*KmGA3P))/((1{dimensionless}+Xyl5P/KmXyl5P+GA3P/KmGA3P)*(1{dimensionless}+Erythrose4P/KmEry4P+F6P/KmF6P));
  enddef;

  def comp vNADPH as
    var vNADPH: mmol_per_min {pub: out};
    var kNADPH: per_min {init: 2};
    var cytoplasm: liter {pub: in};
    var NADPH: mM {pub: in};
    vNADPH = cytoplasm*kNADPH*NADPH;
  enddef;

  def comp vGLT as
    var vGLT: mmol_per_min {pub: out};
    var VmGLT: mM_per_min {init: 97.264};
    var KeqGLT: dimensionless {init: 1};
    var KmGLTGLCo: mM {init: 1.1918};
    var KmGLTGLCi: mM {init: 1.1918};
    var cytoplasm: liter {pub: in};
    var GLCi: mM {pub: in};
    var GLCo: mM {pub: in};
    vGLT = cytoplasm*VmGLT*(GLCo-GLCi/KeqGLT)/(KmGLTGLCo*(1{dimensionless}+GLCo/KmGLTGLCo+GLCi/KmGLTGLCi+0.91{dimensionless}*GLCo*GLCi/(KmGLTGLCi*KmGLTGLCo)));
  enddef;
  def map between environment and cytoplasm for
    vars time and time;
  enddef;
  def map between parameters and vGLK for
    vars SUMAXP and SUMAXP;
  enddef;
  def map between parameters and vPFK for
    vars SUMAXP and SUMAXP;
  enddef;
  def map between parameters and vGAPDH for
    vars k_rel_GAPDH and k_rel_GAPDH;
  enddef;
  def map between parameters and vPGK for
    vars SUMAXP and SUMAXP;
  enddef;
  def map between parameters and vPYK for
    vars SUMAXP and SUMAXP;
  enddef;
  def map between parameters and vATP for
    vars SUMAXP and SUMAXP;
  enddef;
  def map between parameters and vTPI for
    vars k_rel_TPI and k_rel_TPI;
  enddef;
  def map between rules and cytoplasm for
    vars NADP and NADP;
    vars NADPH and NADPH;
  enddef;
  def map between vGLK and cytoplasm for
    vars vGLK and vGLK;
    vars cytoplasm and cytoplasm;
    vars G6P and G6P;
    vars GLCi and GLCi;
    vars P and P;
  enddef;
  def map between vPGI and cytoplasm for
    vars vPGI and vPGI;
    vars cytoplasm and cytoplasm;
    vars G6P and G6P;
    vars F6P and F6P;
  enddef;
  def map between vPFK and cytoplasm for
    vars vPFK and vPFK;
    vars cytoplasm and cytoplasm;
    vars F16P and F16P;
    vars F26BP and F26BP;
    vars F6P and F6P;
    vars P and P;
    vars DHAP and DHAP;
  enddef;
  def map between vALD and cytoplasm for
    vars vALD and vALD;
    vars cytoplasm and cytoplasm;
    vars F16P and F16P;
    vars GA3P and GA3P;
    vars DHAP and DHAP;
  enddef;
  def map between vG3PDH and cytoplasm for
    vars vG3PDH and vG3PDH;
    vars cytoplasm and cytoplasm;
    vars NAD and NAD;
    vars NADH and NADH;
    vars DHAP and DHAP;
  enddef;
  def map between vG3PDH and extracellular for
    vars GLY and GLY;
  enddef;
  def map between vGAPDH and cytoplasm for
    vars vGAPDH and vGAPDH;
    vars cytoplasm and cytoplasm;
    vars BPG and BPG;
    vars GA3P and GA3P;
    vars NAD and NAD;
    vars NADH and NADH;
  enddef;
  def map between vPGK and cytoplasm for
    vars vPGK and vPGK;
    vars cytoplasm and cytoplasm;
    vars BPG and BPG;
    vars P and P;
    vars P3G and P3G;
  enddef;
  def map between vPGM and cytoplasm for
    vars vPGM and vPGM;
    vars cytoplasm and cytoplasm;
    vars P2G and P2G;
    vars P3G and P3G;
  enddef;
  def map between vENO and cytoplasm for
    vars vENO and vENO;
    vars cytoplasm and cytoplasm;
    vars P2G and P2G;
    vars PEP and PEP;
  enddef;
  def map between vPYK and cytoplasm for
    vars vPYK and vPYK;
    vars cytoplasm and cytoplasm;
    vars PEP and PEP;
    vars P and P;
    vars PYR and PYR;
  enddef;
  def map between vPDC and cytoplasm for
    vars vPDC and vPDC;
    vars cytoplasm and cytoplasm;
    vars PYR and PYR;
  enddef;
  def map between vSUC and cytoplasm for
    vars vSUC and vSUC;
    vars cytoplasm and cytoplasm;
    vars ACE and ACE;
  enddef;
  def map between vADH and cytoplasm for
    vars vADH and vADH;
    vars cytoplasm and cytoplasm;
    vars ACE and ACE;
    vars NAD and NAD;
    vars NADH and NADH;
  enddef;
  def map between vADH and extracellular for
    vars ETOH and ETOH;
  enddef;
  def map between vATP and cytoplasm for
    vars vATP and vATP;
    vars cytoplasm and cytoplasm;
    vars P and P;
  enddef;
  def map between vTPI and cytoplasm for
    vars vTPI and vTPI;
    vars cytoplasm and cytoplasm;
    vars DHAP and DHAP;
    vars GA3P and GA3P;
  enddef;
  def map between vG6PDH and cytoplasm for
    vars vG6PDH and vG6PDH;
    vars cytoplasm and cytoplasm;
    vars G6P and G6P;
    vars NADP and NADP;
    vars NADPH and NADPH;
  enddef;
  def map between v6PGL and cytoplasm for
    vars v6PGL and v6PGL;
    vars cytoplasm and cytoplasm;
    vars D6PGluconoLactone and D6PGluconoLactone;
  enddef;
  def map between vGluDH and cytoplasm for
    vars vGluDH and vGluDH;
    vars cytoplasm and cytoplasm;
    vars D6PGluconate and D6PGluconate;
    vars NADP and NADP;
    vars NADPH and NADPH;
  enddef;
  def map between vPPI and cytoplasm for
    vars vPPI and vPPI;
    vars cytoplasm and cytoplasm;
    vars Ribulose5P and Ribulose5P;
    vars Ribose5P and Ribose5P;
  enddef;
  def map between vTransk1 and cytoplasm for
    vars vTransk1 and vTransk1;
    vars cytoplasm and cytoplasm;
    vars GA3P and GA3P;
    vars Ribose5P and Ribose5P;
    vars Seduhept7P and Seduhept7P;
    vars Xyl5P and Xyl5P;
  enddef;
  def map between vR5PI and cytoplasm for
    vars vR5PI and vR5PI;
    vars cytoplasm and cytoplasm;
    vars Ribulose5P and Ribulose5P;
    vars Xyl5P and Xyl5P;
  enddef;
  def map between vTransald and cytoplasm for
    vars vTransald and vTransald;
    vars cytoplasm and cytoplasm;
    vars Erythrose4P and Erythrose4P;
    vars F6P and F6P;
    vars Seduhept7P and Seduhept7P;
    vars GA3P and GA3P;
  enddef;
  def map between vTransk2 and cytoplasm for
    vars vTransk2 and vTransk2;
    vars cytoplasm and cytoplasm;
    vars Erythrose4P and Erythrose4P;
    vars F6P and F6P;
    vars Xyl5P and Xyl5P;
    vars GA3P and GA3P;
  enddef;
  def map between vNADPH and cytoplasm for
    vars vNADPH and vNADPH;
    vars cytoplasm and cytoplasm;
    vars NADPH and NADPH;
  enddef;
  def map between vGLT and cytoplasm for
    vars vGLT and vGLT;
    vars cytoplasm and cytoplasm;
    vars GLCi and GLCi;
  enddef;
  def map between vGLT and extracellular for
    vars GLCo and GLCo;
  enddef;
enddef;
