// publisher: The University of Auckland, Auckland Bioengineering Institute
// comment: FN Catherine Lloyd; This CellML model has been recoded to remove the reaction element. The model runs in both COR and PCEnv and we believe it is close to recreating the original published results. The units have been checked and they are consistent.
// created: W3CDTF 2002-08-20T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; a.cuellar@auckland.ac.nz; Given Autumn; Family Cuellar; Other A
// modification: W3CDTF 2003-04-09; Added publication date information.; Given Autumn; Family Cuellar; Other A
// modification: W3CDTF 2008-01-16T09:08:29+13:00; Completely recoded the model to remove the reaction element.; Given Catherine; Family Lloyd; Other May
// title: The Salem et al Mechanistic Model of Myocardial Energy Metabolism Under Normal and Ischemic Conditions, 2002
// comment: FN Autumn Cuellar; This file contains a CellML description of Salem et al's 2002 mathematical model of the mechanical properties of myocardial energy metabolism under normal and ischemic conditions.
// reference: Pubmed_id 11962772; Given Jennifer; Family Salem; Other E; Given Gerald; Family Saidel; Other M; Given William; Family Stanley; Other C; Given Marco; Family Cabrera; Other E; title Mechanistic Model of Myocardial Energy Metabolism Under Normal and Ischemic Conditions; volume 30; first_page 202; title Annals of Biomedical Engineering; W3CDTF 2002-02; last_page 216
// reference: subject_type keyword; cardiac; myocardium; energy; metabolism; ischemic
// species: Mammalia
def model salem_model_2002 as
  // Mechanistic model of myocardial energy metabolism under normal and ischemic conditions
  //
  // Autumn A. Cuellar
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both COR and OpenCell and we believe it is close to recreating the original published results. The units have been checked and they are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: A moderate reduction in coronary blood flow results in decreased myocardial oxygen consumption, accelerated glycolysis, decreased pyruvate oxidation, and lactate accumulation. To quantitatively understand cardiac metabolism during ischemia, we have developed a mechanistic, mathematical model based on biochemical mass balances and reaction kinetics in cardiac cells. By numerical solution of model equations, computer simulations showed the dynamic responses in glucose, fatty acid, glucose-6-phosphate, glycogen, triglyceride, pyruvate, lactate, acetyl-CoA, and free-CoA as well as CO2, O2, phosphocreatine/creatine, nicotinamide adenine dinucleotide (reduced form)/nicotinamide adenine dinucleotide (oxidized form) (NADH/NAD+), and adenosine diphosphate/adenosine triphosphate (ADP/ATP). When myocardial ischemia was simulated by a 60% reduction in coronary blood flow, the model generated myocardial concentrations, uptakes, and fluxes that were consistent with experimental data from in vivo pig studies. After 60 min of ischemia the concentrations of glycogen, phosphocreatine, and ATP were decreased by 60%, 75%, and 50%, respectively. With the onset of ischemia, myocardial lactate concentration increased and the myocardium switched from net consumer to net producer of lactate. Our model predicted a rapid 13-fold increase in NADH/NAD+, but only a twofold increase in the ratio of acetyl-CoA to free-CoA. These findings are consistent with the concept that pyruvate oxidation is inhibited during ischemia partially by the rise in NADH/NAD+.
  //
  // The original paper reference is cited below:
  //
  // Mechanistic model of myocardial energy metabolism under normal and ischemic conditions, Jennifer E. Salem, Gerald M. Saidel, William C. Stanley, and Marco E. Cabrera, 2002, Annals of Biomedical Engineering, 30, 202-216. PubMed ID: 11962772 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=11962772&dopt=Abstract)
  //
  // Schematic diagrams of the RyR models
  //
  // The reaction pathway of the Salem et al. model. Glucose (through the GLUT transporters), lactate, CO2, O2, and palmitate (fatty acids) are the only species in this model considered to transfer between the blood and myocytes.
  def unit umol_per_g as
    unit mole {pref: micro};
    unit gram {expo: -1};
  enddef;
  def unit umol_per_ml as
    unit mole {pref: micro};
    unit litre {pref: milli, expo: -1};
  enddef;
  def unit g_per_ml as
    unit gram;
    unit litre {pref: milli, expo: -1};
  enddef;
  def unit ml_per_g_min as
    unit litre {pref: milli};
    unit gram {expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;
  def unit flux as
    unit umol_per_g;
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;
  // reactions

  def comp v1 as
    var v1: flux {pub: out};
    var Vmax: flux {init: 5.90};
    var Km: umol_per_g {init: 0.05};
    var GL: umol_per_g {pub: in};
    v1 = Vmax*(GL/(Km+GL));
  enddef;

  def comp v2 as
    var v2: flux {pub: out};
    var Vmax: flux {init: 67.6};
    var Km: umol_per_g {init: 0.01};
    var O2: umol_per_g {pub: in};
    v2 = Vmax*(O2/(Km+O2));
  enddef;

  def comp v3 as
    var v3: flux {pub: out};
    var Vmax: first_order_rate_constant {init: 4.90};
    var k3: first_order_rate_constant;
    var FA: umol_per_g {pub: in};
    var PS: dimensionless {pub: in};
    var PS0: dimensionless {pub: in};
    v3 = k3*FA;
    k3 = Vmax*(pow(PS, -1{dimensionless})/(pow(PS0, -1{dimensionless})+pow(PS, -1{dimensionless})));
  enddef;

  def comp v4 as
    var v4: flux {pub: out};
    var Vmax: first_order_rate_constant {init: 21.3};
    var k4: first_order_rate_constant;
    var epsilon: dimensionless {init: 0.6};
    var FA: umol_per_g {pub: in};
    var RS: dimensionless {pub: in};
    var RS0: dimensionless {pub: in};
    var AF: dimensionless {pub: in};
    var AF0: dimensionless {pub: in};
    v4 = k4*FA;
    k4 = Vmax*(epsilon*(pow(AF, -1{dimensionless})/(pow(AF0, -1{dimensionless})+pow(AF, -1{dimensionless})))+(1{dimensionless}-epsilon)*(pow(RS, -1{dimensionless})/(pow(RS0, -1{dimensionless})+pow(RS, -1{dimensionless}))));
  enddef;

  def comp v5 as
    var v5: flux {pub: out};
    var Vmax: first_order_rate_constant {init: 2.82};
    var k5: first_order_rate_constant;
    var epsilon: dimensionless {init: 0.254};
    var GP: umol_per_g {pub: in};
    var RS: dimensionless {pub: in};
    var RS0: dimensionless {pub: in};
    var PS: dimensionless {pub: in};
    var PS0: dimensionless {pub: in};
    v5 = k5*GP;
    k5 = Vmax*(epsilon*(PS/(PS0+PS))+(1{dimensionless}-epsilon)*(pow(RS, -1{dimensionless})/(pow(RS0, -1{dimensionless})+pow(RS, -1{dimensionless}))));
  enddef;

  def comp v6 as
    var v6: flux {pub: out};
    var Vmax: first_order_rate_constant {init: 3.14};
    var k6: first_order_rate_constant;
    var epsilon: dimensionless {init: 0.5};
    var GP: umol_per_g {pub: in};
    var CS: dimensionless {pub: in};
    var CS0: dimensionless {pub: in};
    var PS: dimensionless {pub: in};
    var PS0: dimensionless {pub: in};
    v6 = k6*GP;
    k6 = Vmax*(epsilon*(pow(PS, -1{dimensionless})/(pow(PS0, -1{dimensionless})+pow(PS, -1{dimensionless})))+(1{dimensionless}-epsilon)*sqr(pow(CS, -1{dimensionless})/(pow(CS0, -1{dimensionless})+pow(CS, -1{dimensionless}))));
  enddef;

  def comp v7 as
    var v7: flux {pub: out};
    var Vmax: first_order_rate_constant {init: 0.0162};
    var k7: first_order_rate_constant;
    var epsilon: dimensionless {init: 0.5};
    var GY: umol_per_g {pub: in};
    var CS: dimensionless {pub: in};
    var CS0: dimensionless {pub: in};
    var PS: dimensionless {pub: in};
    var PS0: dimensionless {pub: in};
    v7 = k7*GY;
    k7 = Vmax*(epsilon*(PS/(PS0+PS))+(1{dimensionless}-epsilon)*sqr(CS/(CS0+CS)));
  enddef;

  def comp v8 as
    var v8: flux {pub: out};
    var Vmax: first_order_rate_constant {init: 0.005};
    var k8: first_order_rate_constant;
    var TG: umol_per_g {pub: in};
    v8 = k8*TG;
    k8 = Vmax;
  enddef;

  def comp v9 as
    var v9: flux {pub: out};
    var Vmax: first_order_rate_constant {init: 1.8};
    var k9: first_order_rate_constant;
    var PY: umol_per_g {pub: in};
    var RS: dimensionless {pub: in};
    var RS0: dimensionless {pub: in};
    v9 = k9*PY;
    k9 = Vmax*(RS/(RS0+RS));
  enddef;

  def comp v10 as
    var v10: flux {pub: out};
    var Vmax: first_order_rate_constant {init: 12.6};
    var k10: first_order_rate_constant;
    var epsilon: dimensionless {init: 0.98};
    var PY: umol_per_g {pub: in};
    var RS: dimensionless {pub: in};
    var RS0: dimensionless {pub: in};
    var AF: dimensionless {pub: in};
    var AF0: dimensionless {pub: in};
    v10 = k10*PY;
    k10 = Vmax*(epsilon*(pow(RS, -1{dimensionless})/(pow(RS0, -1{dimensionless})+pow(RS, -1{dimensionless})))+(1{dimensionless}-epsilon)*(pow(AF, -1{dimensionless})/(pow(AF0, -1{dimensionless})+pow(AF, -1{dimensionless}))));
  enddef;

  def comp v11 as
    var v11: flux {pub: out};
    var Vmax: first_order_rate_constant {init: 0.96};
    var k11: first_order_rate_constant;
    var LA: umol_per_g {pub: in};
    var RS: dimensionless {pub: in};
    var RS0: dimensionless {pub: in};
    v11 = k11*LA;
    k11 = Vmax*(pow(RS, -1{dimensionless})/(pow(RS0, -1{dimensionless})+pow(RS, -1{dimensionless})));
  enddef;

  def comp v12 as
    var v12: flux {pub: out};
    var Vmax: first_order_rate_constant {init: 695.7};
    var k12: first_order_rate_constant;
    var epsilon: dimensionless {init: 0.75};
    var AC: umol_per_g {pub: in};
    var RS: dimensionless {pub: in};
    var RS0: dimensionless {pub: in};
    var PS: dimensionless {pub: in};
    var PS0: dimensionless {pub: in};
    v12 = k12*AC;
    k12 = Vmax*(epsilon*(pow(RS, -1{dimensionless})/(pow(RS0, -1{dimensionless})+pow(RS, -1{dimensionless})))+(1{dimensionless}-epsilon)*(PS/(PS0+PS)));
  enddef;

  def comp v13 as
    var v13: flux {pub: out};
    var Vmax: first_order_rate_constant {init: 0.455};
    var k13: first_order_rate_constant;
    var CR: umol_per_g {pub: in};
    var PS: dimensionless {pub: in};
    var PS0: dimensionless {pub: in};
    v13 = k13*CR;
    k13 = Vmax*(pow(PS, -1{dimensionless})/(pow(PS0, -1{dimensionless})+pow(PS, -1{dimensionless})));
  enddef;

  def comp v14 as
    var v14: flux {pub: out};
    var Vmax: first_order_rate_constant {init: 0.455};
    var k14: first_order_rate_constant;
    var PC: umol_per_g {pub: in};
    var PS: dimensionless {pub: in};
    var PS0: dimensionless {pub: in};
    v14 = k14*PC;
    k14 = Vmax*(PS/(PS0+PS));
  enddef;

  def comp v15 as
    var v15: flux {pub: out};
    var Vmax: first_order_rate_constant {init: 626.1};
    var k15: first_order_rate_constant;
    var epsilon: dimensionless {init: 0.669};
    var CoA_pool: umol_per_g {pub: in};
    var RS: dimensionless {pub: in};
    var RS0: dimensionless {pub: in};
    var FC: umol_per_g {pub: in};
    var FC0: umol_per_g {pub: in};
    v15 = k15*CoA_pool;
    k15 = Vmax*(epsilon*(pow(RS, -1{dimensionless})/(pow(RS0, -1{dimensionless})+pow(RS, -1{dimensionless})))+(1{dimensionless}-epsilon)*(pow(FC, -1{dimensionless})/(pow(FC0, -1{dimensionless})+pow(FC, -1{dimensionless}))));
  enddef;

  def comp v16 as
    var v16: flux {pub: out};
    var Vmax: first_order_rate_constant {init: 67.0};
    var k16: first_order_rate_constant;
    var epsilon: dimensionless {init: 0.775};
    var AC: umol_per_g {pub: in};
    var RS: dimensionless {pub: in};
    var RS0: dimensionless {pub: in};
    var FC: umol_per_g {pub: in};
    var FC0: umol_per_g {pub: in};
    v16 = k16*AC;
    k16 = Vmax*(epsilon*(pow(RS, -1{dimensionless})/(pow(RS0, -1{dimensionless})+pow(RS, -1{dimensionless})))+(1{dimensionless}-epsilon)*(pow(FC, -1{dimensionless})/(pow(FC0, -1{dimensionless})+pow(FC, -1{dimensionless}))));
  enddef;

  def comp v17 as
    var v17: flux {pub: out};
    var Vmax: first_order_rate_constant {init: 7.76};
    var k17: first_order_rate_constant;
    var ATP: umol_per_g {pub: in};
    v17 = k17*ATP;
    k17 = Vmax;
  enddef;
  // substrate concentrations

  def comp GL as
    var GL: umol_per_g {pub: out, init: 0.998};
    var aGL: umol_per_ml {init: 4.0};
    var sigmaGL: g_per_ml {init: 3.76};
    var F: ml_per_g_min {pub: in};
    var v1: flux {pub: in};
    var time: minute {pub: in};
    ode(GL, time) = F*(aGL-sigmaGL*GL)-v1;
  enddef;

  // title: FA
  // alternative: fatty acids
  def comp FA as
    var FA: umol_per_g {pub: out, init: 0.021};
    var aFA: umol_per_ml {init: 0.5};
    var sigmaFA: g_per_ml {init: 13.2};
    var F: ml_per_g_min {pub: in};
    var v8: flux {pub: in};
    var v3: flux {pub: in};
    var v4: flux {pub: in};
    var time: minute {pub: in};
    ode(FA, time) = 3{dimensionless}*v8+F*(aFA-sigmaFA*FA)-(v3+v4);
  enddef;

  // title: GP
  // alternative: glucose-6-phosphate
  def comp GP as
    var GP: umol_per_g {pub: out, init: 0.171};
    var v1: flux {pub: in};
    var v5: flux {pub: in};
    var v6: flux {pub: in};
    var v7: flux {pub: in};
    var time: minute {pub: in};
    ode(GP, time) = v1+v7-(v5+v6);
  enddef;

  // title: GY
  // alternative: glycogen
  def comp GY as
    var GY: umol_per_g {pub: out, init: 33.0};
    var v6: flux {pub: in};
    var v7: flux {pub: in};
    var time: minute {pub: in};
    ode(GY, time) = v6-v7;
  enddef;

  // title: TG
  // alternative: triglyceride
  def comp TG as
    var TG: umol_per_g {pub: out, init: 3.96};
    var v3: flux {pub: in};
    var v8: flux {pub: in};
    var time: minute {pub: in};
    ode(TG, time) = 1{dimensionless}/3{dimensionless}*v3-v8;
  enddef;

  // title: PY
  // alternative: pyruvate
  def comp PY as
    var PY: umol_per_g {pub: out, init: 0.20};
    var v5: flux {pub: in};
    var v11: flux {pub: in};
    var v9: flux {pub: in};
    var v10: flux {pub: in};
    var time: minute {pub: in};
    ode(PY, time) = 2{dimensionless}*v5+v11-(v9+v10);
  enddef;

  // title: LA
  // alternative: lactate
  def comp LA as
    var LA: umol_per_g {pub: out, init: 1.98};
    var aLA: umol_per_ml {init: 1.8};
    var sigmaLA: g_per_ml {init: 0.51};
    var F: ml_per_g_min {pub: in};
    var v9: flux {pub: in};
    var v11: flux {pub: in};
    var time: minute {pub: in};
    ode(LA, time) = v9+F*(aLA-sigmaLA*LA)-v11;
  enddef;

  // title: AC
  // alternative: acetyl-CoA
  def comp AC as
    var AC: umol_per_g {pub: out, init: 0.0046};
    var v10: flux {pub: in};
    var v4: flux {pub: in};
    var v12: flux {pub: in};
    var v16: flux {pub: in};
    var time: minute {pub: in};
    ode(AC, time) = v10+v4-(v12+v16);
  enddef;

  // title: FC
  // alternative: free-CoA
  def comp FC as
    var FC: umol_per_g {pub: out, init: 0.0088};
    var v10: flux {pub: in};
    var v4: flux {pub: in};
    var v12: flux {pub: in};
    var v15: flux {pub: in};
    var v16: flux {pub: in};
    var time: minute {pub: in};
    ode(FC, time) = v12+v15+v16-(v10+v4);
  enddef;

  // title: CoA_pool
  // alternative: remainder of the CoA species
  def comp CoA_pool as
    var CoA_pool: umol_per_g {pub: out, init: 0.043};
    var v15: flux {pub: in};
    var v16: flux {pub: in};
    var time: minute {pub: in};
    ode(CoA_pool, time) = v16-v15;
  enddef;

  // title: O2
  // alternative: oxygen
  def comp O2 as
    var O2: umol_per_g {pub: out, init: 0.963};
    var aO2: umol_per_ml {init: 6.53};
    var sigmaO2: g_per_ml {init: 1.0};
    var F: ml_per_g_min {pub: in};
    var v2: flux {pub: in};
    var time: minute {pub: in};
    ode(O2, time) = F*(aO2-sigmaO2*O2)-v2;
  enddef;

  // title: CO2
  // alternative: carbon dioxide
  def comp CO2 as
    var CO2: umol_per_g {pub: out, init: 20.0};
    var aCO2: umol_per_ml {init: 15.5};
    var sigmaCO2: g_per_ml {init: 1.0};
    var F: ml_per_g_min {pub: in};
    var v10: flux {pub: in};
    var v12: flux {pub: in};
    var time: minute {pub: in};
    ode(CO2, time) = v10+2{dimensionless}*v12+F*(aCO2-sigmaCO2*CO2);
  enddef;

  def comp NAD as
    var NAD: umol_per_g {pub: out, init: 1.81};
    var v5: flux {pub: in};
    var v11: flux {pub: in};
    var v9: flux {pub: in};
    var v10: flux {pub: in};
    var v12: flux {pub: in};
    var v4: flux {pub: in};
    var v2: flux {pub: in};
    var time: minute {pub: in};
    ode(NAD, time) = v9+2{dimensionless}*v2-(2{dimensionless}*v5+v10+v11+11{dimensionless}/3{dimensionless}*v12+35{dimensionless}/3{dimensionless}*v4);
  enddef;

  def comp ADP as
    var ADP: umol_per_g {pub: out, init: 0.90};
    var v1: flux {pub: in};
    var v5: flux {pub: in};
    var v6: flux {pub: in};
    var v12: flux {pub: in};
    var v4: flux {pub: in};
    var v3: flux {pub: in};
    var v2: flux {pub: in};
    var v14: flux {pub: in};
    var v13: flux {pub: in};
    var v17: flux {pub: in};
    var time: minute {pub: in};
    ode(ADP, time) = v1+v6+2{dimensionless}*v4+2{dimensionless}*v3+v13+v17-(3{dimensionless}*v5+v12+6{dimensionless}*v2+v14);
  enddef;

  // title: PC
  // alternative: phosphocreatine
  def comp PC as
    var PC: umol_per_g {pub: out, init: 8.80};
    var v13: flux {pub: in};
    var v14: flux {pub: in};
    var time: minute {pub: in};
    ode(PC, time) = v13-v14;
  enddef;

  // title: CR
  // alternative: creatine
  def comp CR as
    var CR: umol_per_g {pub: out, init: 3.5};
    var v13: flux {pub: in};
    var v14: flux {pub: in};
    var time: minute {pub: in};
    ode(CR, time) = v14-v13;
  enddef;

  def comp ATP as
    var ATP: umol_per_g {pub: out, init: 4.5};
  enddef;

  def comp NADH as
    var NADH: umol_per_g {pub: out, init: 0.19};
  enddef;

  def comp CS0 as
    var CS0: dimensionless {pub: out, init: 1.0};
  enddef;

  def comp PS0 as
    var PS0: dimensionless {pub: out, init: 0.2};
  enddef;

  def comp RS0 as
    var RS0: dimensionless {pub: out, init: 0.111};
  enddef;

  def comp AF0 as
    var AF0: dimensionless {pub: out, init: 0.523};
  enddef;

  def comp FC0 as
    var FC0: umol_per_g {pub: out, init: 0.0088};
  enddef;

  def comp CS as
    var CS: dimensionless {pub: out};
    var CR: umol_per_g {pub: in};
    var PC: umol_per_g {pub: in};
    CS = CR/PC;
  enddef;

  def comp RS as
    var RS: dimensionless {pub: out};
    var NADH: umol_per_g {pub: in};
    var NAD: umol_per_g {pub: in};
    RS = NADH/NAD;
  enddef;

  def comp PS as
    var PS: dimensionless {pub: out};
    var ADP: umol_per_g {pub: in};
    var ATP: umol_per_g {pub: in};
    PS = ADP/ATP;
  enddef;

  def comp AF as
    var AF: dimensionless {pub: out};
    var AC: umol_per_g {pub: in};
    var FC: umol_per_g {pub: in};
    AF = AC/FC;
  enddef;

  def comp model_parameters as
    var F: ml_per_g_min {pub: out};
    var time: minute {pub: in};
    F = sel
      case (time > 0.0{minute}) and (time < 5.0{minute}):
        1.0{ml_per_g_min};
      otherwise:
        0.4{ml_per_g_min};
    endsel;
  enddef;
  def map between v1 and GL for
    vars v1 and v1;
    vars GL and GL;
  enddef;
  def map between v2 and O2 for
    vars v2 and v2;
    vars O2 and O2;
  enddef;
  def map between v3 and FA for
    vars v3 and v3;
    vars FA and FA;
  enddef;
  def map between v3 and PS for
    vars PS and PS;
  enddef;
  def map between v3 and PS0 for
    vars PS0 and PS0;
  enddef;
  def map between v4 and FA for
    vars v4 and v4;
    vars FA and FA;
  enddef;
  def map between v4 and RS for
    vars RS and RS;
  enddef;
  def map between v4 and RS0 for
    vars RS0 and RS0;
  enddef;
  def map between v4 and AF for
    vars AF and AF;
  enddef;
  def map between v4 and AF0 for
    vars AF0 and AF0;
  enddef;
  def map between v5 and GP for
    vars v5 and v5;
    vars GP and GP;
  enddef;
  def map between v5 and RS for
    vars RS and RS;
  enddef;
  def map between v5 and RS0 for
    vars RS0 and RS0;
  enddef;
  def map between v5 and PS for
    vars PS and PS;
  enddef;
  def map between v5 and PS0 for
    vars PS0 and PS0;
  enddef;
  def map between v6 and GP for
    vars v6 and v6;
    vars GP and GP;
  enddef;
  def map between v6 and CS for
    vars CS and CS;
  enddef;
  def map between v6 and CS0 for
    vars CS0 and CS0;
  enddef;
  def map between v6 and PS for
    vars PS and PS;
  enddef;
  def map between v6 and PS0 for
    vars PS0 and PS0;
  enddef;
  def map between v7 and GY for
    vars v7 and v7;
    vars GY and GY;
  enddef;
  def map between v7 and CS for
    vars CS and CS;
  enddef;
  def map between v7 and CS0 for
    vars CS0 and CS0;
  enddef;
  def map between v7 and PS for
    vars PS and PS;
  enddef;
  def map between v7 and PS0 for
    vars PS0 and PS0;
  enddef;
  def map between v8 and TG for
    vars v8 and v8;
    vars TG and TG;
  enddef;
  def map between v9 and PY for
    vars v9 and v9;
    vars PY and PY;
  enddef;
  def map between v9 and RS for
    vars RS and RS;
  enddef;
  def map between v9 and RS0 for
    vars RS0 and RS0;
  enddef;
  def map between v10 and PY for
    vars v10 and v10;
    vars PY and PY;
  enddef;
  def map between v10 and RS for
    vars RS and RS;
  enddef;
  def map between v10 and RS0 for
    vars RS0 and RS0;
  enddef;
  def map between v10 and AF for
    vars AF and AF;
  enddef;
  def map between v10 and AF0 for
    vars AF0 and AF0;
  enddef;
  def map between v11 and LA for
    vars v11 and v11;
    vars LA and LA;
  enddef;
  def map between v11 and RS for
    vars RS and RS;
  enddef;
  def map between v11 and RS0 for
    vars RS0 and RS0;
  enddef;
  def map between v12 and AC for
    vars v12 and v12;
    vars AC and AC;
  enddef;
  def map between v12 and RS for
    vars RS and RS;
  enddef;
  def map between v12 and RS0 for
    vars RS0 and RS0;
  enddef;
  def map between v12 and PS for
    vars PS and PS;
  enddef;
  def map between v12 and PS0 for
    vars PS0 and PS0;
  enddef;
  def map between v13 and CR for
    vars v13 and v13;
    vars CR and CR;
  enddef;
  def map between v13 and PS for
    vars PS and PS;
  enddef;
  def map between v13 and PS0 for
    vars PS0 and PS0;
  enddef;
  def map between v14 and PC for
    vars v14 and v14;
    vars PC and PC;
  enddef;
  def map between v14 and PS for
    vars PS and PS;
  enddef;
  def map between v14 and PS0 for
    vars PS0 and PS0;
  enddef;
  def map between v15 and CoA_pool for
    vars v15 and v15;
    vars CoA_pool and CoA_pool;
  enddef;
  def map between v15 and RS for
    vars RS and RS;
  enddef;
  def map between v15 and RS0 for
    vars RS0 and RS0;
  enddef;
  def map between v15 and FC for
    vars v15 and v15;
    vars FC and FC;
  enddef;
  def map between v15 and FC0 for
    vars FC0 and FC0;
  enddef;
  def map between v16 and AC for
    vars v16 and v16;
    vars AC and AC;
  enddef;
  def map between v16 and RS for
    vars RS and RS;
  enddef;
  def map between v16 and RS0 for
    vars RS0 and RS0;
  enddef;
  def map between v16 and FC for
    vars v16 and v16;
    vars FC and FC;
  enddef;
  def map between v16 and FC0 for
    vars FC0 and FC0;
  enddef;
  def map between v17 and ATP for
    vars ATP and ATP;
  enddef;
  def map between GL and model_parameters for
    vars F and F;
  enddef;
  def map between FA and model_parameters for
    vars F and F;
  enddef;
  def map between O2 and model_parameters for
    vars F and F;
  enddef;
  def map between CO2 and model_parameters for
    vars F and F;
  enddef;
  def map between LA and model_parameters for
    vars F and F;
  enddef;
  def map between GP and v1 for
    vars v1 and v1;
  enddef;
  def map between GP and v7 for
    vars v7 and v7;
  enddef;
  def map between GY and v6 for
    vars v6 and v6;
  enddef;
  def map between TG and v3 for
    vars v3 and v3;
  enddef;
  def map between PY and v5 for
    vars v5 and v5;
  enddef;
  def map between PY and v11 for
    vars v11 and v11;
  enddef;
  def map between LA and v9 for
    vars v9 and v9;
  enddef;
  def map between AC and v10 for
    vars v10 and v10;
  enddef;
  def map between AC and v4 for
    vars v4 and v4;
  enddef;
  def map between FC and v10 for
    vars v10 and v10;
  enddef;
  def map between FC and v4 for
    vars v4 and v4;
  enddef;
  def map between FC and v12 for
    vars v12 and v12;
  enddef;
  def map between FA and v8 for
    vars v8 and v8;
  enddef;
  def map between CoA_pool and v16 for
    vars v16 and v16;
  enddef;
  def map between CO2 and v10 for
    vars v10 and v10;
  enddef;
  def map between CO2 and v12 for
    vars v12 and v12;
  enddef;
  def map between NAD and v10 for
    vars v10 and v10;
  enddef;
  def map between NAD and v11 for
    vars v11 and v11;
  enddef;
  def map between NAD and v5 for
    vars v5 and v5;
  enddef;
  def map between NAD and v9 for
    vars v9 and v9;
  enddef;
  def map between NAD and v12 for
    vars v12 and v12;
  enddef;
  def map between NAD and v4 for
    vars v4 and v4;
  enddef;
  def map between NAD and v2 for
    vars v2 and v2;
  enddef;
  def map between ADP and v1 for
    vars v1 and v1;
  enddef;
  def map between ADP and v5 for
    vars v5 and v5;
  enddef;
  def map between ADP and v6 for
    vars v6 and v6;
  enddef;
  def map between ADP and v12 for
    vars v12 and v12;
  enddef;
  def map between ADP and v4 for
    vars v4 and v4;
  enddef;
  def map between ADP and v3 for
    vars v3 and v3;
  enddef;
  def map between ADP and v2 for
    vars v2 and v2;
  enddef;
  def map between ADP and v14 for
    vars v14 and v14;
  enddef;
  def map between ADP and v13 for
    vars v13 and v13;
  enddef;
  def map between ADP and v17 for
    vars v17 and v17;
  enddef;
  def map between PC and v13 for
    vars v13 and v13;
  enddef;
  def map between CR and v14 for
    vars v14 and v14;
  enddef;
  def map between CS and CR for
    vars CR and CR;
  enddef;
  def map between CS and PC for
    vars PC and PC;
  enddef;
  def map between RS and NAD for
    vars NAD and NAD;
  enddef;
  def map between RS and NADH for
    vars NADH and NADH;
  enddef;
  def map between PS and ADP for
    vars ADP and ADP;
  enddef;
  def map between PS and ATP for
    vars ATP and ATP;
  enddef;
  def map between AF and AC for
    vars AC and AC;
  enddef;
  def map between AF and FC for
    vars FC and FC;
  enddef;
  def map between GL and environment for
    vars time and time;
  enddef;
  def map between FA and environment for
    vars time and time;
  enddef;
  def map between GP and environment for
    vars time and time;
  enddef;
  def map between GY and environment for
    vars time and time;
  enddef;
  def map between TG and environment for
    vars time and time;
  enddef;
  def map between PY and environment for
    vars time and time;
  enddef;
  def map between LA and environment for
    vars time and time;
  enddef;
  def map between AC and environment for
    vars time and time;
  enddef;
  def map between FC and environment for
    vars time and time;
  enddef;
  def map between CoA_pool and environment for
    vars time and time;
  enddef;
  def map between O2 and environment for
    vars time and time;
  enddef;
  def map between CO2 and environment for
    vars time and time;
  enddef;
  def map between NAD and environment for
    vars time and time;
  enddef;
  def map between ADP and environment for
    vars time and time;
  enddef;
  def map between PC and environment for
    vars time and time;
  enddef;
  def map between CR and environment for
    vars time and time;
  enddef;
  def map between model_parameters and environment for
    vars time and time;
  enddef;
enddef;
// GL
// title: GL
// alternative: glucose
