<?xml version="1.0"?>
<!--
This CellML file was generated on 19/04/2010 at 1:40:15 at p.m. using:

COR (0.9.31.1371)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="tolic_2000" cmeta:id="tolic_2000" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">

	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Modelling the Insulin-Glucose Feedback System: The Significance of Pulsatile Insulin Secretion</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This model runs in OpenCell and COR to recreate the published results (Figure 1). The units are consistent throughout. This describes the original Insulin-Glucose feedback model described in equations 1-11. 
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: A mathematical model of the insulin-glucose feedback regulation in man is used to examine the effects of an oscillatory supply of insulin compared to a constant supply at the same average rate. We show that interactions between the oscillatory insulin supply and the receptor dynamics can be of minute significance only. It is possible, however, to interpret seemingly conflicting results of clinical studies in terms of their different experimental conditions with respect to the hepatic glucose release. If this release is operating near an upper limit, an oscillatory insulin supply will be more efficient in lowering the blood glucose level than a constant supply. If the insulin level is high enough for the hepatic release of glucose to nearly vanish, the opposite effect is observed. For insulin concentrations close to the point of inflection of the insulin-glucose dose-response curve an oscillatory and a constant insulin infusion produce similar effects. 
</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
Modelling the Insulin-Glucose Feedback System: The Significance of Pulsatile Insulin Secretion, Iva Marija Tolic, Erik Mosekilde and Jeppe Sturis, 2000, <emphasis>Journal of Theoretical Biology</emphasis>, 207, 361-375. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=11082306&amp;dopt=Abstract">PubMed ID: 11082306</ulink>
				</para>
				<informalfigure float="0" id="fig_cell_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>A simplified diagram of the model</title>
							</objectinfo>
							<imagedata fileref="tolic_2000.png"/>
						</imageobject>
					</mediaobject>
					<caption>A simplified diagram of the model.  There are three main variables: G which represents the amount of glucose in the intercellular space and in the plasma, Ip which represents the amount of insulin in the plasma, and Ii which is the amount of insulin in the intercellular space.  The black arrows represent transmembrane glucose and insulin exchange.  The green arrows represent positive feedback loops.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
		<rdf:Bag rdf:about="rdf:#6be7ae4f-c8d7-4528-b967-b9d2cf551ca4">
			<rdf:li>insulin-glucose dynamics</rdf:li>
			<rdf:li>beta cell</rdf:li>
			<rdf:li>signal transduction</rdf:li>
			<rdf:li>pulsatile secretion</rdf:li>
			<rdf:li>Pancreatic Beta-Cell</rdf:li>
			<rdf:li>metabolism</rdf:li>
		</rdf:Bag>
		<rdf:Seq rdf:about="rdf:#citationAuthorsSeq">
			<rdf:li rdf:resource="rdf:#author1Vcard"/>
			<rdf:li rdf:resource="rdf:#author2Vcard"/>
			<rdf:li rdf:resource="rdf:#author3Vcard"/>
		</rdf:Seq>
		<rdf:Description rdf:about="rdf:#2f4dd24d-f861-4a76-9ecb-06730dd9c3d6">
			<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
			<rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="#tolic_2000">
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">
        A modified version of Tolic et al's original 2000 mathematical model of 
        the insulin-glucose feedback system in pancreatic beta cells.  The model
        has been altered to account for hyperglycemic conditions. 
      </dc:title>
			<cmeta:bio_entity>Pancreatic Beta Cell</cmeta:bio_entity>
			<cmeta:comment rdf:resource="rdf:#cad02067-9da6-4451-a432-4b9b726ec988"/>
			<bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#882f51f3-cb32-44e3-af8b-530fc18f9ae1"/>
			<bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#9ed07a75-ef54-4528-a3fb-9c0c4a0cd2e4"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#e5915965-df44-4349-b4bd-43ad2efb46e1">
			<vCard:Orgname xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">The University of Auckland</vCard:Orgname>
			<vCard:Orgunit xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Auckland Bioengineering Institute</vCard:Orgunit>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#b19b6570-a1be-4a9d-b31b-08ae12f11953">
			<dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2003-01-14</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#fb67a4c5-19c1-476c-ab2b-4950c4960f5d">
			<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#citationAuthorsSeq"/>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Modelling the Insulin-Glucose Feedback System: The Significance of Pulsatile Insulin Secretion</dc:title>
			<bqs:volume xmlns:bqs="http://www.cellml.org/bqs/1.0#">207</bqs:volume>
			<bqs:first_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">361</bqs:first_page>
			<bqs:Journal xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#82ad139a-3d06-4310-8926-1cb4334fd2f1"/>
			<dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:resource="rdf:#d40f5cc9-35f4-4d56-8eb2-a1eb93e8565b"/>
			<bqs:last_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">375</bqs:last_page>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#d0eb0cbe-6b49-4e40-a851-a5e36a5c0675">
			<dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2003-04-09</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#bdfc9a8f-d329-494b-a72c-9d9628175c68">
			<vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Tolic</vCard:Given>
			<vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Iva</vCard:Family>
			<vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Marija</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#author2VcardN">
			<vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Erik</vCard:Given>
			<vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Mosekilde</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#author3VcardN">
			<vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Jeppe</vCard:Given>
			<vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Sturis</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#9ed07a75-ef54-4528-a3fb-9c0c4a0cd2e4">
			<dc:subject xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#5038e060-cb97-4462-9327-510c03af33e0"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#bc807c02-930f-4840-836a-8e7cbd583276">
			<dcterms:modified xmlns:dcterms="http://purl.org/dc/terms/" rdf:resource="rdf:#d0eb0cbe-6b49-4e40-a851-a5e36a5c0675"/>
			<rdf:value>
          Added publication date information.
        </rdf:value>
			<cmeta:modifier rdf:resource="rdf:#af93acac-52bd-4f2b-8746-f79492456965"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#cad02067-9da6-4451-a432-4b9b726ec988">
			<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#68102c66-3bed-4aaf-9636-db67c81a0e48"/>
			<rdf:value>This is the CellML description of a modified version of Tolic et al's original 2000 mathematical model of the insulin-glucose feedback system in pancreatic beta cells. The model has been altered to account for hyperglycemic conditions.</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#author2Vcard">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#author2VcardN"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#68102c66-3bed-4aaf-9636-db67c81a0e48">
			<vCard:FN xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="">
			<dc:publisher xmlns:dc="http://purl.org/dc/elements/1.1/">
        The University of Auckland, Auckland Bioengineering Institute
      </dc:publisher>
			<cmeta:modification rdf:resource="rdf:#bc807c02-930f-4840-836a-8e7cbd583276"/>
			<dcterms:created xmlns:dcterms="http://purl.org/dc/terms/" rdf:resource="rdf:#b19b6570-a1be-4a9d-b31b-08ae12f11953"/>
			<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#c73c7a75-30a6-49ef-b47f-7227cfb59daf"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#c73c7a75-30a6-49ef-b47f-7227cfb59daf">
			<vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#e5915965-df44-4349-b4bd-43ad2efb46e1"/>
			<vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#2f4dd24d-f861-4a76-9ecb-06730dd9c3d6"/>
			<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#62cc2110-1893-4e6d-9e2d-ae248214f7eb"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#62cc2110-1893-4e6d-9e2d-ae248214f7eb">
			<vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Catherine</vCard:Given>
			<vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Lloyd</vCard:Family>
			<vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">May</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#5038e060-cb97-4462-9327-510c03af33e0">
			<bqs:subject_type xmlns:bqs="http://www.cellml.org/bqs/1.0#">keyword</bqs:subject_type>
			<rdf:value rdf:resource="rdf:#6be7ae4f-c8d7-4528-b967-b9d2cf551ca4"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#d40f5cc9-35f4-4d56-8eb2-a1eb93e8565b">
			<dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2000-12-07</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#af93acac-52bd-4f2b-8746-f79492456965">
			<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#bdfc9a8f-d329-494b-a72c-9d9628175c68"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#author1Vcard">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#author1VcardN"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#author1VcardN">
			<vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Iva</vCard:Given>
			<vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Tolic</vCard:Family>
			<vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Maria</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#author3Vcard">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#author3VcardN"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#882f51f3-cb32-44e3-af8b-530fc18f9ae1">
			<bqs:Pubmed_id xmlns:bqs="http://www.cellml.org/bqs/1.0#">11082306</bqs:Pubmed_id>
			<bqs:JournalArticle xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#fb67a4c5-19c1-476c-ab2b-4950c4960f5d"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#82ad139a-3d06-4310-8926-1cb4334fd2f1">
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Journal of Theoretical Biology</dc:title>
		</rdf:Description>
	</rdf:RDF>   
	
   <units base_units="yes" name="U"/>
   <units name="mU">
      <unit prefix="milli" units="U"/>
   </units>
   <units name="mg">
      <unit prefix="milli" units="gram"/>
   </units>
   <units name="min">
      <unit multiplier="60" units="second"/>
   </units>
   <units name="l">
      <unit units="litre"/>
   </units>
   <units name="mg_per_min">
      <unit units="mg"/>
      <unit exponent="-1" units="min"/>
   </units>
   <units name="mg_per_l">
      <unit units="mg"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="mU_per_l">
      <unit units="mU"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="mU_per_min">
      <unit units="mU"/>
      <unit exponent="-1" units="min"/>
   </units>
   <units name="l_per_min">
      <unit units="l"/>
      <unit exponent="-1" units="min"/>
   </units>
   <units name="l_per_mU">
      <unit units="l"/>
      <unit exponent="-1" units="mU"/>
   </units>
   <units name="per_mU">
      <unit exponent="-1" units="mU"/>
   </units>
   <units name="mg_per_dl">
      <unit units="mg"/>
      <unit exponent="-1" prefix="deci" units="l"/>
   </units>
   <units name="dl_per_l">
      <unit prefix="deci" units="l"/>
      <unit exponent="-1" units="l"/>
   </units>
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="min"/>
      <variable initial_value="3" name="Vp" public_interface="out" units="l"/>
      <variable initial_value="11" name="Vi" public_interface="out" units="l"/>
      <variable initial_value="10" name="Vg" public_interface="out" units="l"/>
      <variable initial_value="0.2" name="E" public_interface="out" units="l_per_min"/>
   </component>
   <component name="plasma_insulin">
      <variable cmeta:id="plasma_insulin_Ip" initial_value="93.36441699" name="Ip" public_interface="out" units="mU"/>
      <variable name="Ip_conc" units="mU_per_l"/>
      <variable initial_value="6" name="tp" units="min"/>
      <variable name="f1_G" units="mU_per_min"/>
      <variable initial_value="210" name="Rm" units="mU_per_min"/>
      <variable initial_value="2000" name="C1" units="mg_per_l"/>
      <variable initial_value="300" name="a1" units="mg_per_l"/>
      <variable name="time" public_interface="in" units="min"/>
      <variable name="Vp" public_interface="in" units="l"/>
      <variable name="Vi" public_interface="in" units="l"/>
      <variable name="Vg" public_interface="in" units="l"/>
      <variable name="Ii" public_interface="in" units="mU"/>
      <variable name="G" public_interface="in" units="mg"/>
      <variable name="E" public_interface="in" units="l_per_min"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Ip</ci>
            </apply>
            <apply>
               <minus/>
               <ci>f1_G</ci>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>E</ci>
                     <apply>
                        <minus/>
                        <apply>
                           <divide/>
                           <ci>Ip</ci>
                           <ci>Vp</ci>
                        </apply>
                        <apply>
                           <divide/>
                           <ci>Ii</ci>
                           <ci>Vi</ci>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <divide/>
                     <ci>Ip</ci>
                     <ci>tp</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>Ip_conc</ci>
            <apply>
               <divide/>
               <ci>Ip</ci>
               <ci>Vp</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>f1_G</ci>
            <apply>
               <divide/>
               <ci>Rm</ci>
               <apply>
                  <plus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <ci>C1</ci>
                           <apply>
                              <divide/>
                              <ci>G</ci>
                              <ci>Vg</ci>
                           </apply>
                        </apply>
                        <ci>a1</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="intercellular_insulin">
      <variable cmeta:id="intercellular_insulin_Ii" initial_value="243.2865183" name="Ii" public_interface="out" units="mU"/>
      <variable name="Ii_conc" units="mU_per_l"/>
      <variable initial_value="100" name="ti" public_interface="out" units="min"/>
      <variable name="time" public_interface="in" units="min"/>
      <variable name="Vp" public_interface="in" units="l"/>
      <variable name="Vi" public_interface="in" units="l"/>
      <variable name="Ip" public_interface="in" units="mU"/>
      <variable name="E" public_interface="in" units="l_per_min"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Ii</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>E</ci>
                  <apply>
                     <minus/>
                     <apply>
                        <divide/>
                        <ci>Ip</ci>
                        <ci>Vp</ci>
                     </apply>
                     <apply>
                        <divide/>
                        <ci>Ii</ci>
                        <ci>Vi</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <ci>Ii</ci>
                  <ci>ti</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>Ii_conc</ci>
            <apply>
               <divide/>
               <ci>Ii</ci>
               <ci>Vi</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="glucose">
      <variable cmeta:id="glucose_G" initial_value="12342.61665" name="G" public_interface="out" units="mg"/>
      <variable name="G_conc" units="mg_per_dl"/>
      <variable initial_value="216" name="Gin" units="mg_per_min"/>
      <variable name="f2_G" units="mg_per_min"/>
      <variable name="f3_G" units="dimensionless"/>
      <variable name="f4_Ii" units="mg_per_min"/>
      <variable name="f5_x3" units="mg_per_min"/>
      <variable initial_value="144" name="C2" units="mg_per_l"/>
      <variable initial_value="1000" name="C3" units="mg_per_l"/>
      <variable initial_value="80" name="C4" units="mU_per_l"/>
      <variable initial_value="26" name="C5" units="mU_per_l"/>
      <variable initial_value="40" name="U0" units="mg_per_min"/>
      <variable initial_value="940" name="Um" units="mg_per_min"/>
      <variable initial_value="72" name="Ub" units="mg_per_min"/>
      <variable initial_value="1.77" name="beta" units="dimensionless"/>
      <variable initial_value="180" name="Rg" units="mg_per_min"/>
      <variable initial_value="0.29" name="alpha" units="l_per_mU"/>
      <variable name="time" public_interface="in" units="min"/>
      <variable name="ti" public_interface="in" units="min"/>
      <variable name="Vg" public_interface="in" units="l"/>
      <variable name="Vp" public_interface="in" units="l"/>
      <variable name="Vi" public_interface="in" units="l"/>
      <variable name="E" public_interface="in" units="l_per_min"/>
      <variable name="Ii" public_interface="in" units="mU"/>
      <variable name="x3" public_interface="in" units="min"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>G</ci>
            </apply>
            <apply>
               <plus/>
               <ci>Gin</ci>
               <ci>f5_x3</ci>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>f2_G</ci>
                     <apply>
                        <times/>
                        <ci>f3_G</ci>
                        <ci>f4_Ii</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>G_conc</ci>
            <apply>
               <divide/>
               <ci>G</ci>
               <apply>
                  <times/>
                  <ci>Vg</ci>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dl_per_l">10</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>f2_G</ci>
            <apply>
               <times/>
               <ci>Ub</ci>
               <apply>
                  <minus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <ci>G</ci>
                        </apply>
                        <apply>
                           <times/>
                           <ci>C2</ci>
                           <ci>Vg</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>f3_G</ci>
            <apply>
               <divide/>
               <ci>G</ci>
               <apply>
                  <times/>
                  <ci>C3</ci>
                  <ci>Vg</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>f4_Ii</ci>
            <apply>
               <plus/>
               <ci>U0</ci>
               <apply>
                  <divide/>
                  <apply>
                     <minus/>
                     <ci>Um</ci>
                     <ci>U0</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <apply>
                        <exp/>
                        <apply>
                           <times/>
                           <apply>
                              <minus/>
                              <ci>beta</ci>
                           </apply>
                           <apply>
                              <ln/>
                              <apply>
                                 <times/>
                                 <apply>
                                    <divide/>
                                    <ci>Ii</ci>
                                    <ci>C4</ci>
                                 </apply>
                                 <apply>
                                    <plus/>
                                    <apply>
                                       <divide/>
                                       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                                       <ci>Vi</ci>
                                    </apply>
                                    <apply>
                                       <divide/>
                                       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                                       <apply>
                                          <times/>
                                          <ci>E</ci>
                                          <ci>ti</ci>
                                       </apply>
                                    </apply>
                                 </apply>
                              </apply>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>f5_x3</ci>
            <apply>
               <divide/>
               <ci>Rg</ci>
               <apply>
                  <plus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <ci>alpha</ci>
                        <apply>
                           <minus/>
                           <apply>
                              <divide/>
                              <apply>
                                 <times/>
                                 <ci>x3</ci>
                                 <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mU_per_min">1</cn>
                              </apply>
                              <ci>Vp</ci>
                           </apply>
                           <ci>C5</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="delay">
      <variable initial_value="104.5878705" name="x3" public_interface="out" units="min"/>
      <variable initial_value="36" name="td" units="min"/>
      <variable initial_value="110.420253" name="x1" units="min"/>
      <variable initial_value="112.7601171" name="x2" units="min"/>
      <variable name="time" public_interface="in" units="min"/>
      <variable name="Ip" public_interface="in" units="mU"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x1</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                  <ci>td</ci>
               </apply>
               <apply>
                  <minus/>
                  <apply>
                     <divide/>
                     <ci>Ip</ci>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mU_per_min">1</cn>
                  </apply>
                  <ci>x1</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x2</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                  <ci>td</ci>
               </apply>
               <apply>
                  <minus/>
                  <ci>x1</ci>
                  <ci>x2</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x3</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                  <ci>td</ci>
               </apply>
               <apply>
                  <minus/>
                  <ci>x2</ci>
                  <ci>x3</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="plasma_insulin" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="Vp" variable_2="Vp"/>
      <map_variables variable_1="Vg" variable_2="Vg"/>
      <map_variables variable_1="Vi" variable_2="Vi"/>
      <map_variables variable_1="E" variable_2="E"/>
   </connection>
   <connection>
      <map_components component_1="intercellular_insulin" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="Vp" variable_2="Vp"/>
      <map_variables variable_1="Vi" variable_2="Vi"/>
      <map_variables variable_1="E" variable_2="E"/>
   </connection>
   <connection>
      <map_components component_1="glucose" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="Vp" variable_2="Vp"/>
      <map_variables variable_1="Vg" variable_2="Vg"/>
      <map_variables variable_1="Vi" variable_2="Vi"/>
      <map_variables variable_1="E" variable_2="E"/>
   </connection>
   <connection>
      <map_components component_1="delay" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="plasma_insulin" component_2="glucose"/>
      <map_variables variable_1="G" variable_2="G"/>
   </connection>
   <connection>
      <map_components component_1="plasma_insulin" component_2="intercellular_insulin"/>
      <map_variables variable_1="Ip" variable_2="Ip"/>
      <map_variables variable_1="Ii" variable_2="Ii"/>
   </connection>
   <connection>
      <map_components component_1="plasma_insulin" component_2="delay"/>
      <map_variables variable_1="Ip" variable_2="Ip"/>
   </connection>
   <connection>
      <map_components component_1="intercellular_insulin" component_2="glucose"/>
      <map_variables variable_1="Ii" variable_2="Ii"/>
      <map_variables variable_1="ti" variable_2="ti"/>
   </connection>
   <connection>
      <map_components component_1="glucose" component_2="delay"/>
      <map_variables variable_1="x3" variable_2="x3"/>
   </connection>
</model>