<?xml version="1.0"?>
<!--  FILE :  westermark_model_2003.xml

CREATED :  8th October 2004

LAST MODIFIED : 8th October 2004

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of Westermark and Lansner's 2003 mathematical model of phosphofructokinase and glycolytic oscillations in the pancreatic beta-cell.

CHANGES:  
   
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="westermark_2003" name="westermark_2003">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>A Model of Phosphofructokinase and Glycolytic Oscillations in the Pancreatic Beta-cell</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
        This CellML model runs in OpenCell to replicate the published results (figure 3a). It was curated with help from the equivalent SBML model from the BioModels database (BIOMD0000000236).
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: We have constructed a model of the upper part of the glycolysis in the pancreatic beta-cell. The model comprises the enzymatic reactions from glucokinase to glyceraldehyde-3-phosphate dehydrogenase (GAPDH). Our results show, for a substantial part of the parameter space, an oscillatory behavior of the glycolysis for a large range of glucose concentrations. We show how the occurrence of oscillations depends on glucokinase, aldolase and/or GAPDH activities, and how the oscillation period depends on the phosphofructokinase activity. We propose that the ratio of glucokinase and aldolase and/or GAPDH activities are adequate as characteristics of the glucose responsiveness, rather than only the glucokinase activity. We also propose that the rapid equilibrium between different oligomeric forms of phosphofructokinase may reduce the oscillation period sensitivity to phosphofructokinase activity. Methodologically, we show that a satisfying description of phosphofructokinase kinetics can be achieved using the irreversible Hill equation with allosteric modifiers. We emphasize the use of parameter ranges rather than fixed values, and the use of operationally well-defined parameters in order for this methodology to be feasible. The theoretical results presented in this study apply to the study of insulin secretion mechanisms, since glycolytic oscillations have been proposed as a cause of oscillations in the ATP/ADP ratio which is linked to insulin secretion.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
A Model of Phosphofructokinase and Glycolytic Oscillations in the Pancreatic Beta-cell, Pal O. Westermark and Anders Lansner, 2003, <emphasis>Biophysical Journal</emphasis>, 85, 126-139. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/12829470">PubMed ID: 12829470</ulink>
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>reaction diagram</title>
    </objectinfo>
    <imagedata fileref="westermark_2003.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic representation of the mathematical model of glycolysis.  The fluxes over the enzyme catalysed reactions are denoted <emphasis>v</emphasis>.</caption>
</informalfigure>

</sect1>
</article>
</documentation>
  
  
  
  <units name="minute">
    <unit multiplier="60.0" units="second"/>
  </units>
  
  <units name="millimolar">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  
  <units name="micromole">
    <unit prefix="micro" units="mole"/>
  </units>
  
  <units name="enzyme_activity">
    <unit units="micromole"/>
    <unit exponent="-1" units="gram"/>
    <unit exponent="-1" units="minute"/>
  </units>
  
  <units name="flux">
    <unit units="millimolar"/>
    <unit exponent="-1" units="second"/>
  </units>
  
  
  <component name="environment">
    <variable cmeta:id="environment_time" name="time" public_interface="out" units="second"/>
  </component>
  
  <component cmeta:id="v_GK" name="v_GK">
    <variable name="v_GK" public_interface="out" units="flux"/>
    
    <variable initial_value="10.0" name="V_GK_min" units="enzyme_activity"/>
	<variable name="V_GK" units="enzyme_activity"/>
    <variable initial_value="8.0" name="Sgk" units="millimolar"/>
    <variable initial_value="1.7" name="h_GK" units="dimensionless"/>
    
    <variable name="Glc" public_interface="in" units="millimolar"/>
	<variable name="min_to_sec" public_interface="in" units="dimensionless"/>
	<variable name="dw_per_ml" public_interface="in" units="dimensionless"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> v_GK </ci> 
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci> V_GK </ci> 
            <apply>
              <power/>
              <apply>
                <divide/>
                <ci> Glc </ci>
                <ci> Sgk </ci>
              </apply>
              <ci> h_GK </ci>
            </apply> 
          </apply>
          <apply>
            <plus/>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <power/>
              <apply>
                <divide/>
                <ci> Glc </ci>
                <ci> Sgk </ci>
              </apply>
              <ci> h_GK </ci>
            </apply> 
          </apply> 
        </apply>
      </apply>    
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> V_GK </ci> 
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci> V_GK_min </ci> 
			<ci> dw_per_ml </ci> 
          </apply>
          <ci> min_to_sec </ci>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="v_PFK" name="v_PFK">
    <variable name="v_PFK" public_interface="out" units="flux"/>
    
    <variable initial_value="100.0" name="V_PFK_min" units="enzyme_activity"/>
	<variable name="V_PFK" units="enzyme_activity"/>
    <variable initial_value="4.0" name="Spfk" units="millimolar"/>
    <variable initial_value="0.005" name="Sfba" units="millimolar"/>
    <variable initial_value="0.01" name="Xpfk" units="millimolar"/>
    <variable initial_value="2.5" name="hx" units="dimensionless"/>
    <variable initial_value="5.0" name="alpha" units="dimensionless"/>
    <variable initial_value="2.5" name="h_PFK" units="dimensionless"/>
    <variable initial_value="1.0" name="h_act" units="dimensionless"/>
    
    <variable name="FBP" public_interface="in" units="millimolar"/>
    <variable name="F6P" public_interface="in" units="millimolar"/>
    <variable name="min_to_sec" public_interface="in" units="dimensionless"/>
	<variable name="dw_per_ml" public_interface="in" units="dimensionless"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> v_PFK </ci> 
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci> V_PFK </ci> 
            <apply>
              <power/>
              <apply>
                <divide/>
                <ci> F6P </ci>
                <ci> Spfk </ci>
              </apply>
              <apply>
                <minus/>
				<ci> h_PFK </ci>
				<apply>
                  <times/>
				  <apply>
                    <minus/>
					<ci> h_PFK </ci>
					<ci> h_act </ci>
                  </apply> 
				  <apply>
                    <divide/>
					<apply>
                      <divide/>
					  <ci> FBP </ci>
                      <ci> Sfba </ci>
                    </apply>
					<apply>
                      <plus/>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
					  <apply>
                        <divide/>
					    <ci> FBP </ci>
                        <ci> Sfba </ci>
                      </apply>
				    </apply>
				  </apply>
				</apply>
              </apply>
			</apply>
		  </apply>
          <apply>
            <plus/>
			<apply>
              <power/>
              <apply>
                <divide/>
                <ci> F6P </ci>
                <ci> Spfk </ci>
              </apply>
              <apply>
                <minus/>
				<ci> h_PFK </ci>
				<apply>
                  <times/>
				  <apply>
                    <minus/>
					<ci> h_PFK </ci>
					<ci> h_act </ci>
                  </apply> 
				  <apply>
                    <divide/>
					<apply>
                      <divide/>
					  <ci> FBP </ci>
                      <ci> Sfba </ci>
                    </apply>
					<apply>
                      <plus/>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
					  <apply>
                        <divide/>
					    <ci> FBP </ci>
                        <ci> Sfba </ci>
                      </apply>
				    </apply>
				  </apply>
				</apply>
              </apply>
            </apply> 
			<apply>
              <divide/>
			  <apply>
                <plus/>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
				<apply>
                  <power/>
                  <apply>
                    <divide/>
                    <ci> FBP </ci>
                    <ci> Xpfk </ci>
                  </apply>
				  <ci> hx </ci>
                </apply>
              </apply> 
			  <apply>
                <plus/>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
				<apply>
                  <times/>
			      <apply>
                    <power/>
				    <ci> alpha </ci>
				    <apply>
                      <minus/>
				      <ci> h_PFK </ci>
				      <apply>
                        <times/>
				        <apply>
                          <minus/>
					      <ci> h_PFK </ci>
					      <ci> h_act </ci>
                        </apply> 
				        <apply>
                          <divide/>
					      <apply>
                            <divide/>
					        <ci> FBP </ci>
                            <ci> Sfba </ci>
                          </apply>
					      <apply>
                            <plus/>
                            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
					        <apply>
                              <divide/>
					          <ci> FBP </ci>
                              <ci> Sfba </ci>
                            </apply>
						  </apply>
				        </apply>
				      </apply>
				    </apply>
                  </apply>
				  <apply>
                    <power/>
					<apply>
                      <divide/>
					  <ci> FBP </ci>
                      <ci> Xpfk </ci>
                    </apply>
				    <ci> hx </ci>
                  </apply>
                </apply>
              </apply> 
            </apply> 
		  </apply> 
        </apply>
      </apply>    
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> V_PFK </ci> 
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci> V_PFK_min </ci> 
			<ci> dw_per_ml </ci> 
          </apply>
          <ci> min_to_sec </ci>
        </apply>
      </apply>    
    </math>
  </component> 
  
  <component cmeta:id="v_FBA" name="v_FBA">
    <variable name="v_FBA" public_interface="out" units="flux"/>
    
    <variable initial_value="25.0" name="V_FBA_min" units="enzyme_activity"/>
	<variable name="V_FBA" units="enzyme_activity"/>
    <variable initial_value="0.275" name="Qfba" units="millimolar"/>
	<variable initial_value="0.005" name="Sfba" units="millimolar"/>
    <variable initial_value="0.5" name="Pfba" units="millimolar"/>
    <variable initial_value="0.1" name="Keq_FBA" units="millimolar"/>
    
    <variable name="FBP" public_interface="in" units="millimolar"/>
	<variable name="G3P" public_interface="in" units="millimolar"/>
    <variable name="DHAP" public_interface="in" units="millimolar"/>
	<variable name="min_to_sec" public_interface="in" units="dimensionless"/>
	<variable name="dw_per_ml" public_interface="in" units="dimensionless"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> v_FBA </ci> 
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci> V_FBA </ci>
            <apply>
              <minus/>
              <apply>
                <divide/>
				<ci> FBP </ci> 
				<ci> Sfba </ci>
              </apply>
			  <apply>
                <divide/>
				<apply>
                  <times/>
                  <ci> G3P </ci>
                  <ci> DHAP </ci>
			    </apply>
				<apply>
                  <times/>
                  <ci> Pfba </ci>
                  <ci> Qfba </ci>
				  <ci> Keq_FBA </ci>
			    </apply>
			  </apply>
			</apply>
		  </apply>
          <apply>
            <plus/>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <divide/>
              <ci> FBP </ci>
              <ci> Sfba </ci>
            </apply>
			<apply>
              <divide/>
              <ci> DHAP </ci>
              <ci> Qfba </ci>
            </apply>
			<apply>
              <divide/>
              <apply>
                <times/>
                <ci> G3P </ci>
                <ci> DHAP </ci>
			  </apply>
		      <apply>
                <times/>
                <ci> Pfba </ci>
                <ci> Qfba </ci>
			  </apply>
			</apply>
          </apply> 
        </apply>
      </apply>

      <apply>
        <eq/> 
        <ci> V_FBA </ci> 
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci> V_FBA_min </ci> 
			<ci> dw_per_ml </ci> 
          </apply>
          <ci> min_to_sec </ci>
        </apply>
      </apply> 	  
    </math>
  </component>
  
  <component cmeta:id="v_GAPDH" name="v_GAPDH">
    <variable name="v_GAPDH" public_interface="out" units="flux"/>
    
    <variable initial_value="250.0" name="V_GAPDH_min" units="enzyme_activity"/>
	<variable name="V_GAPDH" units="enzyme_activity"/>
	<variable initial_value="0.005" name="Sgapdh" units="millimolar"/>
    
    <variable name="G3P" public_interface="in" units="millimolar"/>
	<variable name="min_to_sec" public_interface="in" units="dimensionless"/>
	<variable name="dw_per_ml" public_interface="in" units="dimensionless"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> v_GAPDH </ci> 
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci> V_GAPDH </ci> 
            <ci> G3P </ci>
          </apply>
          <apply>
            <plus/>
            <ci> Sgapdh </ci>
            <ci> G3P </ci>
          </apply> 
        </apply>
      </apply>  

      <apply>
        <eq/> 
        <ci> V_GAPDH </ci> 
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci> V_GAPDH_min </ci> 
			<ci> dw_per_ml </ci> 
          </apply>
          <ci> min_to_sec </ci>
        </apply>
      </apply> 	  
    </math>
  </component>
  
  <component cmeta:id="Glc" name="Glc">
    <variable cmeta:id="Glc_Glc" name="Glc" public_interface="out" units="millimolar"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> Glc </ci> 
		<cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millimolar"> 10.0 </cn>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="G6P_F6P" name="G6P_F6P">
    <variable cmeta:id="G6P_F6P_G6P_F6P" initial_value="3.71728" name="G6P_F6P" public_interface="out" units="millimolar"/>
    
    <variable name="v_GK" public_interface="in" units="flux"/>
    <variable name="v_PFK" public_interface="in" units="flux"/>
    <variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> G6P_F6P </ci> 
        </apply>
        <apply>
          <minus/>
          <ci> v_GK </ci>
          <ci> v_PFK </ci>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="F6P" name="F6P">
    <variable cmeta:id="F6P_F6P" name="F6P" public_interface="out" units="millimolar"/>
    
	<variable initial_value="0.3" name="Keq_GPI" units="dimensionless"/>
	
    <variable name="G6P_F6P" public_interface="in" units="millimolar"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> F6P </ci> 
        <apply>
          <divide/>
		  <apply>
            <times/>
            <ci> G6P_F6P</ci>
            <ci> Keq_GPI </ci>
          </apply>
		  <apply>
            <plus/>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
			<ci> Keq_GPI </ci>
          </apply>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="FBP" name="FBP">
    <variable cmeta:id="FBP_FBP" initial_value="0.00063612" name="FBP" public_interface="out" units="millimolar"/>
    
    <variable name="v_PFK" public_interface="in" units="flux"/>
    <variable name="v_FBA" public_interface="in" units="flux"/>
    <variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> FBP </ci> 
        </apply>
        <apply>
          <minus/>
          <ci> v_PFK </ci>
          <ci> v_FBA </ci>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="DHAP_G3P" name="DHAP_G3P">
    <variable initial_value="0.00262966" name="DHAP_G3P" public_interface="out" units="millimolar"/>
    
    <variable name="v_GAPDH" public_interface="in" units="flux"/>
    <variable name="v_FBA" public_interface="in" units="flux"/>
    <variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> DHAP_G3P </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2 </cn>
			<ci> v_FBA </ci>
		  </apply>
          <ci> v_GAPDH </ci>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="DHAP" name="DHAP">
    <variable cmeta:id="DHAP_DHAP" name="DHAP" public_interface="out" units="millimolar"/>
    
    <variable name="DHAP_G3P" public_interface="in" units="millimolar"/>
    <variable name="G3P" public_interface="in" units="millimolar"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> DHAP </ci> 
        <apply>
          <minus/>
          <ci> DHAP_G3P </ci>
		  <ci> G3P </ci>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="G3P" name="G3P">
    <variable cmeta:id="G3P_G3P" name="G3P" public_interface="out" units="millimolar"/>
    
	<variable initial_value="0.045455" name="Keq_TPI" units="dimensionless"/>
	
    <variable name="DHAP_G3P" public_interface="in" units="millimolar"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> G3P </ci> 
        <apply>
          <divide/>
		  <apply>
            <times/>
            <ci> DHAP_G3P </ci>
            <ci> Keq_TPI </ci>
          </apply>
		  <apply>
            <plus/>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
			<ci> Keq_TPI </ci>
          </apply>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="model_parameters">
    <variable initial_value="60.0" name="min_to_sec" public_interface="out" units="dimensionless"/>
	<variable initial_value="0.3333" name="dw_per_ml" public_interface="out" units="dimensionless"/>
  </component>
  
  
  
  <connection>
    <map_components component_1="G6P_F6P" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="FBP" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="DHAP_G3P" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="Glc" component_2="v_GK"/>
    <map_variables variable_1="Glc" variable_2="Glc"/>
  </connection>
  
  <connection>
    <map_components component_1="model_parameters" component_2="v_GK"/>
    <map_variables variable_1="min_to_sec" variable_2="min_to_sec"/>
	<map_variables variable_1="dw_per_ml" variable_2="dw_per_ml"/>
  </connection>
  
  <connection>
    <map_components component_1="v_PFK" component_2="F6P"/>
    <map_variables variable_1="F6P" variable_2="F6P"/>
  </connection>
  
  <connection>
    <map_components component_1="v_PFK" component_2="FBP"/>
    <map_variables variable_1="FBP" variable_2="FBP"/>
    <map_variables variable_1="v_PFK" variable_2="v_PFK"/>
  </connection>
  
  <connection>
    <map_components component_1="model_parameters" component_2="v_PFK"/>
    <map_variables variable_1="min_to_sec" variable_2="min_to_sec"/>
	<map_variables variable_1="dw_per_ml" variable_2="dw_per_ml"/>
  </connection>
  
  <connection>
    <map_components component_1="v_FBA" component_2="G3P"/>
    <map_variables variable_1="G3P" variable_2="G3P"/>
  </connection>
  
  <connection>
    <map_components component_1="v_FBA" component_2="DHAP"/>
    <map_variables variable_1="DHAP" variable_2="DHAP"/>
  </connection>
  
  <connection>
    <map_components component_1="v_FBA" component_2="FBP"/>
    <map_variables variable_1="FBP" variable_2="FBP"/>
	<map_variables variable_1="v_FBA" variable_2="v_FBA"/>
  </connection>
  
  <connection>
    <map_components component_1="model_parameters" component_2="v_FBA"/>
    <map_variables variable_1="min_to_sec" variable_2="min_to_sec"/>
	<map_variables variable_1="dw_per_ml" variable_2="dw_per_ml"/>
  </connection>
  
  <connection>
    <map_components component_1="v_GAPDH" component_2="G3P"/>
    <map_variables variable_1="G3P" variable_2="G3P"/>
  </connection>
  
  <connection>
    <map_components component_1="model_parameters" component_2="v_GAPDH"/>
    <map_variables variable_1="min_to_sec" variable_2="min_to_sec"/>
	<map_variables variable_1="dw_per_ml" variable_2="dw_per_ml"/>
  </connection>
  
  <connection>
    <map_components component_1="v_GK" component_2="G6P_F6P"/>
    <map_variables variable_1="v_GK" variable_2="v_GK"/>
  </connection>
  
  <connection>
    <map_components component_1="v_PFK" component_2="G6P_F6P"/>
    <map_variables variable_1="v_PFK" variable_2="v_PFK"/>
  </connection>
  
  <connection>
    <map_components component_1="G6P_F6P" component_2="F6P"/>
    <map_variables variable_1="G6P_F6P" variable_2="G6P_F6P"/>
  </connection>
  
  <connection>
    <map_components component_1="v_FBA" component_2="DHAP_G3P"/>
    <map_variables variable_1="v_FBA" variable_2="v_FBA"/>
  </connection>
  
  <connection>
    <map_components component_1="v_GAPDH" component_2="DHAP_G3P"/>
    <map_variables variable_1="v_GAPDH" variable_2="v_GAPDH"/>
  </connection>
  
  <connection>
    <map_components component_1="G3P" component_2="DHAP"/>
    <map_variables variable_1="G3P" variable_2="G3P"/>
  </connection>
  
  <connection>
    <map_components component_1="DHAP_G3P" component_2="DHAP"/>
    <map_variables variable_1="DHAP_G3P" variable_2="DHAP_G3P"/>
  </connection>
  
  <connection>
    <map_components component_1="DHAP_G3P" component_2="G3P"/>
    <map_variables variable_1="DHAP_G3P" variable_2="DHAP_G3P"/>
  </connection>
  

<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  <rdf:Bag rdf:about="rdf:#d0754363-615c-459e-aea3-bc600904a39b">
    <rdf:li>glycolysis</rdf:li>
    <rdf:li>oscillator</rdf:li>
    <rdf:li>beta cell</rdf:li>
    <rdf:li>metabolism</rdf:li>
    <rdf:li>pancreas</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#85bf944c-93f5-4d13-b3b7-822395639261">
    <rdf:li rdf:resource="rdf:#7abee6f9-877b-4d39-8964-44849177f6fb"/>
    <rdf:li rdf:resource="rdf:#d707b75e-84db-4dcc-883e-3e27b9ed6186"/>
  </rdf:Seq>
  <rdf:Description rdf:about="#F6P">
    <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">fructose-6-phosphate</dcterms:alternative>
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">F6P</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b9f05638-ffcd-4ebc-84db-a471dc8430e2">
    <dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2004-10-08</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="#v_TPI">
    <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">triosphosphate-phosphate isomerase reaction</dcterms:alternative>
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">v_TPI</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#716c8851-710d-4a46-8833-9914836394f9">
    <bqs:Pubmed_id xmlns:bqs="http://www.cellml.org/bqs/1.0#">12829470</bqs:Pubmed_id>
    <bqs:JournalArticle xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#da9f788b-d818-4fee-9ce0-128932e0cd69"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d707b75e-84db-4dcc-883e-3e27b9ed6186">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#98eaf4f9-0bd3-4bf8-b083-a4f731a38b54"/>
  </rdf:Description>
  <rdf:Description rdf:about="#G6P">
    <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">glucose-6-phosphate</dcterms:alternative>
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">G6P_F6P</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#v_GK">
    <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">glucokinase reaction</dcterms:alternative>
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">v_GK</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0df336c4-18b6-4280-91db-b7c73336784d">
    <dc:subject xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#4d8b2575-ee4a-4ca8-a84f-31a56a3e2d95"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#10f8ab20-2d2f-4e0e-a5fc-872beeb6c8c8">
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Biophysical Journal</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#22ab6691-d506-4137-af3c-cf18011bb1f2">
    <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Pal</vCard:Given>
    <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Westermark</vCard:Family>
    <vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">O</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8deb91a4-89f1-46bd-b622-aa0dae0d4004">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="#Glc">
    <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">glucose</dcterms:alternative>
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Glc</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#98eaf4f9-0bd3-4bf8-b083-a4f731a38b54">
    <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Anders</vCard:Given>
    <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Lansner</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e9c14aa6-4344-4af3-aa5e-e362888eb57e">
    <vCard:Orgname xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">The University of Auckland</vCard:Orgname>
    <vCard:Orgunit xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="#FBP">
    <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">fructose-1,6-bisphosphate</dcterms:alternative>
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">FBP</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4d8b2575-ee4a-4ca8-a84f-31a56a3e2d95">
    <bqs:subject_type xmlns:bqs="http://www.cellml.org/bqs/1.0#">keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#d0754363-615c-459e-aea3-bc600904a39b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8a970c47-6537-41ab-9d82-f4284b18ba07">
    <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Catherine</vCard:Given>
    <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Lloyd</vCard:Family>
    <vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="#v_PFK">
    <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">phosphofructokinase reaction</dcterms:alternative>
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">v_PFK</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#G3P">
    <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">glyceraldehyde-3-phosphate</dcterms:alternative>
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">G3P</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#32c3d7ee-624f-4108-9de4-08646884d5e0">
    <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#2a581743-e8d2-4794-9f47-39505774d1f3"/>
    <rdf:value>
          This is the CellML description of Westermark and Lansner's 2003 mathematical model of phosphofructokinase and glycolytic oscillations in the pancreatic beta-cell.
        </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="#v_GAPDH">
    <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">glyceraldehyde-3-phosphate dehydrogenase reaction</dcterms:alternative>
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">v_GAPDH</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#daada44e-1ef4-45f9-9fa5-33e090936fb5">
    <dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2003-07</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2a581743-e8d2-4794-9f47-39505774d1f3">
    <vCard:FN xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="#v_FBA">
    <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">fructose-bisphosphate aldolase reaction</dcterms:alternative>
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">v_FBA</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#DHAP">
    <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">dihydroxyacetone-phosphate</dcterms:alternative>
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">DHAP</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#da9f788b-d818-4fee-9ce0-128932e0cd69">
    <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#85bf944c-93f5-4d13-b3b7-822395639261"/>
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">
            A Model of Phosphofructokinase and Glycolytic Oscillations in the Pancreatic Beta-cell
          </dc:title>
    <bqs:volume xmlns:bqs="http://www.cellml.org/bqs/1.0#">85</bqs:volume>
    <bqs:first_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">126</bqs:first_page>
    <bqs:Journal xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#10f8ab20-2d2f-4e0e-a5fc-872beeb6c8c8"/>
    <dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:resource="rdf:#daada44e-1ef4-45f9-9fa5-33e090936fb5"/>
    <bqs:last_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">139</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher xmlns:dc="http://purl.org/dc/elements/1.1/">
        The University of Auckland, Auckland Bioengineering Institute
      </dc:publisher>
    <dcterms:created xmlns:dcterms="http://purl.org/dc/terms/" rdf:resource="rdf:#b9f05638-ffcd-4ebc-84db-a471dc8430e2"/>
    <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#168c0f76-dc63-4119-a4b8-94e9f3d314e0"/>
  </rdf:Description>
  <rdf:Description rdf:about="#westermark_2003">
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">
        Westermark and Lansner's 2003 mathematical model of phosphofructokinase and glycolytic oscillations in the pancreatic beta-cell.
      </dc:title>
    <cmeta:bio_entity>Pancreatic beta-cell</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#32c3d7ee-624f-4108-9de4-08646884d5e0"/>
    <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#0df336c4-18b6-4280-91db-b7c73336784d"/>
    <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#716c8851-710d-4a46-8833-9914836394f9"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#168c0f76-dc63-4119-a4b8-94e9f3d314e0">
    <vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#e9c14aa6-4344-4af3-aa5e-e362888eb57e"/>
    <vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#8deb91a4-89f1-46bd-b622-aa0dae0d4004"/>
    <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#8a970c47-6537-41ab-9d82-f4284b18ba07"/>
  </rdf:Description>
  <rdf:Description rdf:about="#v_GPI">
    <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">glucose-6-phosphate isomerase reaction</dcterms:alternative>
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">v_GPI</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7abee6f9-877b-4d39-8964-44849177f6fb">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#22ab6691-d506-4137-af3c-cf18011bb1f2"/>
  </rdf:Description>
</rdf:RDF>
</model>