<?xml version="1.0"?>
<!--
This CellML file was generated on 12/04/2010 at 4:54:42 at p.m. using:

COR (0.9.31.1371)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="wolf_2001" name="wolf_2001">
	
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Metabolic Oscillations in Saccharomyces cerevisiae</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This model runs to reproduce published results in COR, OpenCell and PCEnv. The units are consistent throughout. This model currently reproduces Figure 2B, changing KH (to infinity) and f2 (to 1) will allow the model to reproduce Figure 2A. The initial conditions were estimated and the model run to steady state to yield precise values, changing any parameters will necessitate  repeating this procedure. 
          </para>
			</section>
			
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: Autonomous metabolic oscillations were observed in aerobic continuous culture of Saccharomyces cerevisiae. Experimental investigation of the underlying mechanism revealed that several pathways and regulatory couplings are involved. Here a hypothetical mechanism including the sulfate assimilation pathway, ethanol degradation and respiration is transformed into a mathematical model. Simulations confirm the ability of the model to produce limit cycle oscillations which reproduce most of the characteristic features of the system
</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
Mathematical analysis of a mechanism for autonomous metabolic oscillations in continuous culture of <emphasis>Saccharomyces cerevisiae</emphasis>, Jana Wolf, Ho-Yong Sohn, Reinhart Heinrich and Hiroshi Kuriyama, 2001, <emphasis>FEBS Letters</emphasis>, 499, 230-234.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=11423122&amp;dopt=Abstract">PubMed ID: 11423122</ulink>
				</para>
				<informalfigure float="0" id="fig_cell_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>schematic diagram</title>
							</objectinfo>
							<imagedata fileref="wolf_2001.png"/>
						</imageobject>
					</mediaobject>
					<caption>Reaction scheme of the model.  The following abbreviations are introduced for the metabolites: sul: sulphate ions, aps: adenylyl sulfate, pap: 3-phosphoadenylyl sulfate, hyd: hydrogen sulphide, cys: cysteine, eth: ethanol, aco: acetyl-CoA, S1 and S2: intermediates of the citric acid cycle, oxy: oxygen, C1 and C2: protein complexes involved in oxidative phosphorylation, A3: ATP, A2: ADP, N1: NAD(P)<superscript>+</superscript>, N2: NAD(P)H, oah: O-acetylhomoserine.  The cytosolic and mitochondrial compartments are characterized by the superscripts c and m, respectively.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
		<rdf:Seq rdf:about="rdf:#c5e59051-5302-4c96-b65e-e5395b35ea32">
			<rdf:li rdf:resource="rdf:#d4c91b3b-0e59-4f8d-8bf4-97d6c72646b0"/>
			<rdf:li rdf:resource="rdf:#4a373895-55c6-452f-9fa7-9e44186dd7fb"/>
			<rdf:li rdf:resource="rdf:#6e56ef4c-7805-48e0-8d68-89039ac553dc"/>
			<rdf:li rdf:resource="rdf:#566cb7b6-f4ae-49d3-ac46-ca3457ecfdba"/>
		</rdf:Seq>
		<rdf:Description rdf:about="#sul">
			<dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">sulfate ions</dcterms:alternative>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">sul</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#1639bccc-a747-49bc-874d-2463bcee5bab">
			<vCard:FN xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#ae6c83b9-84f8-47d1-88d6-872240e89529">
			<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#c5e59051-5302-4c96-b65e-e5395b35ea32"/>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Mathematical analysis of a mechanism for autonomous metabolic oscillations in continuous culture of Saccharomyces cerevisae</dc:title>
			<bqs:volume xmlns:bqs="http://www.cellml.org/bqs/1.0#">499</bqs:volume>
			<bqs:first_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">230</bqs:first_page>
			<bqs:Journal xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#3faf74f2-a939-4030-8f05-3427a6063ebb"/>
			<dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:resource="rdf:#1a2ff84f-ddf6-4165-9dc8-54c623d6ecbe"/>
			<bqs:last_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">234</bqs:last_page>
		</rdf:Description>
		<rdf:Description rdf:about="#A_m">
			<dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">
          total mitochondrial adenosine phosphates
        </dcterms:alternative>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">A_m</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="#A_c">
			<dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">
          total cytosolic adenosine phosphates
        </dcterms:alternative>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">A_c</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#4a373895-55c6-452f-9fa7-9e44186dd7fb">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#70af3374-694b-450f-bc1d-ddb64fcf8d5b"/>
		</rdf:Description>
		<rdf:Description rdf:about="#oxy">
			<dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">oxygen</dcterms:alternative>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">oxy</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="#S">
			<dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">
          total intermediates of the citrate acid cycle
        </dcterms:alternative>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">S</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="#cys">
			<dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">cysteine</dcterms:alternative>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">cys</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#70af3374-694b-450f-bc1d-ddb64fcf8d5b">
			<vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Ho-Yong</vCard:Given>
			<vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Sohn</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#4e0d2001-d778-48ef-bf5e-7c09f87aacfb">
			<vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#75a3dbf0-405b-4798-aca7-b49dbd1c406d"/>
			<vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#28ed6aca-3401-4280-868b-fe01804ac4c9"/>
			<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#527f693c-d49e-438f-874d-c0dbb75fb1fd"/>
		</rdf:Description>
		<rdf:Description rdf:about="">
			<dc:publisher xmlns:dc="http://purl.org/dc/elements/1.1/">The University of Auckland, Auckland Bioengineering Institute</dc:publisher>
			<cmeta:comment rdf:resource="rdf:#4d7d6b6e-270c-4329-86c4-f10ee7ac9eb4"/>
			<dcterms:created xmlns:dcterms="http://purl.org/dc/terms/" rdf:resource="rdf:#1ddb801c-bf8e-4f10-b5af-95c835d45564"/>
			<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#4e0d2001-d778-48ef-bf5e-7c09f87aacfb"/>
		</rdf:Description>
		<rdf:Description rdf:about="#S1">
			<dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">
          intermediate of the citrate acid cycle
        </dcterms:alternative>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">S1</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#1ddb801c-bf8e-4f10-b5af-95c835d45564">
			<dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2007-05-31T00:00:00+00:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="#N2">
			<dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">NADH</dcterms:alternative>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">N2</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#3faf74f2-a939-4030-8f05-3427a6063ebb">
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">FEBS</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="#pap">
			<dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">3-phosphoadenylyl sulfate</dcterms:alternative>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">pap</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#566cb7b6-f4ae-49d3-ac46-ca3457ecfdba">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#a19d0dbd-5051-462d-b578-80d04334a8b2"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#6e56ef4c-7805-48e0-8d68-89039ac553dc">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#c900d3b4-bff7-4a09-b2b1-0c463db67f94"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#3a7b6fe6-ab01-4c8e-adfb-e6a6c593d918">
			<dc:subject xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#d758496e-d5ac-4162-9595-10331b56696b"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#1a2ff84f-ddf6-4165-9dc8-54c623d6ecbe">
			<dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2001-06-22</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#37c112c7-977c-42e3-a739-0ad15b998838">
			<vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Jana</vCard:Given>
			<vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Wolf</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="#oah">
			<dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">O-acetylhomoserine</dcterms:alternative>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">oah</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="#A3_c">
			<dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">cytosolic ATP</dcterms:alternative>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">A3_c</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="#A3_m">
			<dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">mitochondrial ATP</dcterms:alternative>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">A3_m</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#8f8d038c-f838-4e9b-9e50-12b75c865ad7">
			<vCard:FN xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#4d7d6b6e-270c-4329-86c4-f10ee7ac9eb4">
			<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#1639bccc-a747-49bc-874d-2463bcee5bab"/>
			<rdf:value/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#d4c91b3b-0e59-4f8d-8bf4-97d6c72646b0">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#37c112c7-977c-42e3-a739-0ad15b998838"/>
		</rdf:Description>
		<rdf:Description rdf:about="#aps">
			<dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">adenylyl sulfate</dcterms:alternative>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">aps</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#d758496e-d5ac-4162-9595-10331b56696b">
			<bqs:subject_type xmlns:bqs="http://www.cellml.org/bqs/1.0#">keyword</bqs:subject_type>
			<rdf:value>
				<rdf:Bag>
					<rdf:li>metabolic oscillations</rdf:li>
					<rdf:li>metabolism</rdf:li>
					<rdf:li>yeast</rdf:li>
				</rdf:Bag>
			</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#28ed6aca-3401-4280-868b-fe01804ac4c9">
			<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
			<rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="#wolf_2001">
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">A dynamic model of metabolic oscillations in yeast</dc:title>
			<cmeta:comment rdf:resource="rdf:#8a726446-10a0-4fb5-a123-0754513befa2"/>
			<bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#3a7b6fe6-ab01-4c8e-adfb-e6a6c593d918"/>
			<bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#7117781b-1558-49c2-8d27-a6fbf6db9836"/>
			<cmeta:species>Saccharomyces cerevisae</cmeta:species>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#527f693c-d49e-438f-874d-c0dbb75fb1fd">
			<vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Catherine</vCard:Given>
			<vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Lloyd</vCard:Family>
			<vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">May</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#c900d3b4-bff7-4a09-b2b1-0c463db67f94">
			<vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Reinhart</vCard:Given>
			<vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Heinrich</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#75a3dbf0-405b-4798-aca7-b49dbd1c406d">
			<vCard:Orgname xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">The University of Auckland</vCard:Orgname>
			<vCard:Orgunit xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Auckland Bioengineering Institute</vCard:Orgunit>
		</rdf:Description>
		<rdf:Description rdf:about="#aco">
			<dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">acetyl-CoA</dcterms:alternative>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">aco</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="#hyd">
			<dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">hydrogen sulphide</dcterms:alternative>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">hyd</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#7117781b-1558-49c2-8d27-a6fbf6db9836">
			<bqs:Pubmed_id xmlns:bqs="http://www.cellml.org/bqs/1.0#">11423122</bqs:Pubmed_id>
			<bqs:JournalArticle xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#ae6c83b9-84f8-47d1-88d6-872240e89529"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#8a726446-10a0-4fb5-a123-0754513befa2">
			<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#8f8d038c-f838-4e9b-9e50-12b75c865ad7"/>
			<rdf:value>This is the CellML description of Wolf et al's mathematical model of 
          metabolic oscillations in the yeast Saccharomyces cerevisiae.</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#a19d0dbd-5051-462d-b578-80d04334a8b2">
			<vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Hiroshi</vCard:Given>
			<vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Kuriyama</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="#eth">
			<dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">ethanol</dcterms:alternative>
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">eth</dc:title>
		</rdf:Description>
	</rdf:RDF>   
	
   <units name="minute">
      <unit multiplier="60" units="second"/>
   </units>
   <units name="millimolar">
      <unit prefix="milli" units="mole"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="flux">
      <unit units="millimolar"/>
      <unit exponent="-1" units="minute"/>
   </units>
   <units name="first_order_rate_constant">
      <unit exponent="-1" units="minute"/>
   </units>
   <units name="second_order_rate_constant">
      <unit exponent="-1" units="millimolar"/>
      <unit exponent="-1" units="minute"/>
   </units>
   <units name="third_order_rate_constant">
      <unit exponent="-2" units="millimolar"/>
      <unit exponent="-1" units="minute"/>
   </units>
   <units name="fifth_order_rate_constant">
      <unit exponent="-4" units="millimolar"/>
      <unit exponent="-1" units="minute"/>
   </units>
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="minute"/>
   </component>
   <component name="S1">
      <variable cmeta:id="S1_S1" initial_value="1.892468811" name="S1" public_interface="out" units="millimolar"/>
      <variable name="v8" public_interface="in" units="flux"/>
      <variable name="v9" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>S1</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v8</ci>
               <ci>v9</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="S">
      <variable initial_value="2" name="S" units="millimolar"/>
      <variable name="S1" public_interface="in" units="millimolar"/>
      <variable cmeta:id="S_S2" name="S2" public_interface="out" units="millimolar"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>S2</ci>
            <apply>
               <minus/>
               <ci>S</ci>
               <ci>S1</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sul">
      <variable cmeta:id="sul_sul" initial_value="0.012871557" name="sul" public_interface="out" units="millimolar"/>
      <variable name="v1" public_interface="in" units="flux"/>
      <variable name="v2" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>sul</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v1</ci>
               <ci>v2</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="aps">
      <variable cmeta:id="aps_aps" initial_value="0.053366179" name="aps" public_interface="out" units="millimolar"/>
      <variable name="v2" public_interface="in" units="flux"/>
      <variable name="v3" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>aps</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v2</ci>
               <ci>v3</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="pap">
      <variable cmeta:id="pap_pap" initial_value="0.082791522" name="pap" public_interface="out" units="millimolar"/>
      <variable name="v3" public_interface="in" units="flux"/>
      <variable name="v4" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>pap</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v3</ci>
               <ci>v4</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="hyd">
      <variable cmeta:id="hyd_hyd" initial_value="0.159317029" name="hyd" public_interface="out" units="millimolar"/>
      <variable name="v4" public_interface="in" units="flux"/>
      <variable name="v5" public_interface="in" units="flux"/>
      <variable name="v17" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>hyd</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v4</ci>
               <apply>
                  <plus/>
                  <ci>v5</ci>
                  <ci>v17</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="cys">
      <variable cmeta:id="cys_cys" initial_value="0.805117739" name="cys" public_interface="out" units="millimolar"/>
      <variable name="v5" public_interface="in" units="flux"/>
      <variable name="v6" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>cys</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v5</ci>
               <ci>v6</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="eth">
      <variable cmeta:id="eth_eth" initial_value="10.25246999" name="eth" public_interface="out" units="millimolar"/>
      <variable name="v13" public_interface="in" units="flux"/>
      <variable name="v7" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>eth</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v13</ci>
               <ci>v7</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="aco">
      <variable cmeta:id="aco_aco" initial_value="1.139360412" name="aco" public_interface="out" units="millimolar"/>
      <variable name="v7" public_interface="in" units="flux"/>
      <variable name="v8" public_interface="in" units="flux"/>
      <variable name="v15" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>aco</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v7</ci>
               <apply>
                  <plus/>
                  <ci>v8</ci>
                  <ci>v15</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="oxy">
      <variable cmeta:id="oxy_oxy" initial_value="6.146549084" name="oxy" public_interface="out" units="millimolar"/>
      <variable name="v10" public_interface="in" units="flux"/>
      <variable name="v11A" public_interface="in" units="flux"/>
      <variable name="v14" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>oxy</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v10</ci>
               <apply>
                  <plus/>
                  <ci>v11A</ci>
                  <ci>v14</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="A3_c">
      <variable cmeta:id="A3_c_A3_c" initial_value="1.570847601" name="A3_c" public_interface="out" units="millimolar"/>
      <variable name="v2" public_interface="in" units="flux"/>
      <variable name="v3" public_interface="in" units="flux"/>
      <variable name="v12" public_interface="in" units="flux"/>
      <variable name="v16" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>A3_c</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v16</ci>
               <apply>
                  <plus/>
                  <ci>v2</ci>
                  <ci>v3</ci>
                  <ci>v12</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="A3_m">
      <variable cmeta:id="A3_m_A3_m" initial_value="1.835158493" name="A3_m" public_interface="out" units="millimolar"/>
      <variable name="v11B" public_interface="in" units="flux"/>
      <variable name="v16" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>A3_m</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v11B</ci>
               <ci>v16</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="A_c">
      <variable initial_value="2" name="A_c" units="millimolar"/>
      <variable cmeta:id="A_c_A2_c" name="A2_c" public_interface="out" units="millimolar"/>
      <variable name="A3_c" public_interface="in" units="millimolar"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>A2_c</ci>
            <apply>
               <minus/>
               <ci>A_c</ci>
               <ci>A3_c</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="A_m">
      <variable initial_value="2" name="A_m" units="millimolar"/>
      <variable cmeta:id="A_m_A2_m" name="A2_m" public_interface="out" units="millimolar"/>
      <variable name="A3_m" public_interface="in" units="millimolar"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>A2_m</ci>
            <apply>
               <minus/>
               <ci>A_m</ci>
               <ci>A3_m</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="N2">
      <variable cmeta:id="N2_N2" initial_value="1.933616149" name="N2" public_interface="out" units="millimolar"/>
      <variable name="v4" public_interface="in" units="flux"/>
      <variable name="v7" public_interface="in" units="flux"/>
      <variable name="v9" public_interface="in" units="flux"/>
      <variable name="v11A" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>N2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                     <ci>v7</ci>
                  </apply>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                     <ci>v9</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                     <ci>v4</ci>
                  </apply>
                  <ci>v11A</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="N">
      <variable initial_value="2" name="N" units="millimolar"/>
      <variable cmeta:id="N_N1" name="N1" public_interface="out" units="millimolar"/>
      <variable name="N2" public_interface="in" units="millimolar"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>N1</ci>
            <apply>
               <minus/>
               <ci>N</ci>
               <ci>N2</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="oah">
      <variable cmeta:id="oah_oah" initial_value="5.571685096" name="oah" public_interface="out" units="millimolar"/>
      <variable name="v5" public_interface="in" units="flux"/>
      <variable name="v15" public_interface="in" units="flux"/>
      <variable name="v18" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>oah</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v15</ci>
               <apply>
                  <plus/>
                  <ci>v5</ci>
                  <ci>v18</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v1">
      <variable name="cys" public_interface="in" units="millimolar"/>
      <variable initial_value="1.6" name="v0" units="flux"/>
      <variable name="f1" units="dimensionless"/>
      <variable initial_value="4" name="n" units="dimensionless"/>
      <variable initial_value="0.1" name="Kc" units="millimolar"/>
      <variable cmeta:id="v1_v1" name="v1" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v1</ci>
            <apply>
               <times/>
               <ci>v0</ci>
               <ci>f1</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>f1</ci>
            <apply>
               <power/>
               <apply>
                  <plus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <power/>
                     <apply>
                        <divide/>
                        <ci>cys</ci>
                        <ci>Kc</ci>
                     </apply>
                     <ci>n</ci>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v2">
      <variable name="sul" public_interface="in" units="millimolar"/>
      <variable name="A3_c" public_interface="in" units="millimolar"/>
      <variable initial_value="0.2" name="k2" units="second_order_rate_constant"/>
      <variable cmeta:id="v2_v2" name="v2" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v2</ci>
            <apply>
               <times/>
               <ci>k2</ci>
               <ci>sul</ci>
               <ci>A3_c</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v3">
      <variable name="aps" public_interface="in" units="millimolar"/>
      <variable name="A3_c" public_interface="in" units="millimolar"/>
      <variable initial_value="0.2" name="k3" units="second_order_rate_constant"/>
      <variable cmeta:id="v3_v3" name="v3" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v3</ci>
            <apply>
               <times/>
               <ci>k3</ci>
               <ci>aps</ci>
               <ci>A3_c</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v4">
      <variable name="pap" public_interface="in" units="millimolar"/>
      <variable name="N2" public_interface="in" units="millimolar"/>
      <variable initial_value="0.2" name="k4" units="second_order_rate_constant"/>
      <variable cmeta:id="v4_v4" name="v4" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v4</ci>
            <apply>
               <times/>
               <ci>k4</ci>
               <ci>pap</ci>
               <ci>N2</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v5">
      <variable name="hyd" public_interface="in" units="millimolar"/>
      <variable name="oah" public_interface="in" units="millimolar"/>
      <variable initial_value="0.1" name="k5" units="second_order_rate_constant"/>
      <variable cmeta:id="v5_v5" name="v5" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v5</ci>
            <apply>
               <times/>
               <ci>k5</ci>
               <ci>hyd</ci>
               <ci>oah</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v6">
      <variable name="cys" public_interface="in" units="millimolar"/>
      <variable initial_value="0.12" name="k6" units="first_order_rate_constant"/>
      <variable cmeta:id="v6_v6" name="v6" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v6</ci>
            <apply>
               <times/>
               <ci>k6</ci>
               <ci>cys</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v7">
      <variable name="eth" public_interface="in" units="millimolar"/>
      <variable name="N1" public_interface="in" units="millimolar"/>
      <variable initial_value="10" name="k7" units="second_order_rate_constant"/>
      <variable cmeta:id="v7_v7" name="v7" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v7</ci>
            <apply>
               <times/>
               <ci>k7</ci>
               <ci>eth</ci>
               <ci>N1</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v8">
      <variable name="aco" public_interface="in" units="millimolar"/>
      <variable name="S2" public_interface="in" units="millimolar"/>
      <variable initial_value="10" name="k8" units="second_order_rate_constant"/>
      <variable cmeta:id="v8_v8" name="v8" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v8</ci>
            <apply>
               <times/>
               <ci>k8</ci>
               <ci>aco</ci>
               <ci>S2</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v9">
      <variable name="S1" public_interface="in" units="millimolar"/>
      <variable name="N1" public_interface="in" units="millimolar"/>
      <variable initial_value="10" name="k9" units="second_order_rate_constant"/>
      <variable cmeta:id="v9_v9" name="v9" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v9</ci>
            <apply>
               <times/>
               <ci>k9</ci>
               <ci>S1</ci>
               <ci>N1</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v10">
      <variable cmeta:id="v10_v10" initial_value="80" name="v10" public_interface="out" units="flux"/>
   </component>
   <component name="v11A">
      <variable name="oxy" public_interface="in" units="millimolar"/>
      <variable name="hyd" public_interface="in" units="millimolar"/>
      <variable name="N2" public_interface="in" units="millimolar"/>
      <variable initial_value="0.1" name="alpha" units="dimensionless"/>
      <variable name="f2" units="dimensionless"/>
      <variable initial_value="4" name="m" units="dimensionless"/>
      <variable initial_value="0.5" name="KH" units="millimolar"/>
      <variable initial_value="10" name="k11" units="first_order_rate_constant"/>
      <variable name="v11A" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v11A</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>k11</ci>
                  <ci>N2</ci>
                  <ci>oxy</ci>
                  <ci>f2</ci>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>alpha</ci>
                     <ci>N2</ci>
                  </apply>
                  <ci>oxy</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>f2</ci>
            <apply>
               <power/>
               <apply>
                  <plus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <power/>
                     <apply>
                        <divide/>
                        <ci>hyd</ci>
                        <ci>KH</ci>
                     </apply>
                     <ci>m</ci>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v11B">
      <variable name="A2_m" public_interface="in" units="millimolar"/>
      <variable name="A3_m" public_interface="in" units="millimolar"/>
      <variable name="v11A" public_interface="in" units="flux"/>
      <variable initial_value="1" name="KA" units="millimolar"/>
      <variable name="v11B" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v11B</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                  <ci>v11A</ci>
                  <ci>A2_m</ci>
               </apply>
               <apply>
                  <plus/>
                  <ci>KA</ci>
                  <ci>A2_m</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v12">
      <variable name="A3_c" public_interface="in" units="millimolar"/>
      <variable initial_value="5" name="k12" units="first_order_rate_constant"/>
      <variable cmeta:id="v12_v12" name="v12" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v12</ci>
            <apply>
               <times/>
               <ci>k12</ci>
               <ci>A3_c</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v13">
      <variable cmeta:id="v13_v13" initial_value="4" name="v13" public_interface="out" units="flux"/>
   </component>
   <component name="v14">
      <variable name="oxy" public_interface="in" units="millimolar"/>
      <variable initial_value="10" name="k14" units="first_order_rate_constant"/>
      <variable cmeta:id="v14_v14" name="v14" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v14</ci>
            <apply>
               <times/>
               <ci>k14</ci>
               <ci>oxy</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v15">
      <variable name="aco" public_interface="in" units="millimolar"/>
      <variable initial_value="5" name="k15" units="first_order_rate_constant"/>
      <variable cmeta:id="v15_v15" name="v15" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v15</ci>
            <apply>
               <times/>
               <ci>k15</ci>
               <ci>aco</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v16">
      <variable name="A3_m" public_interface="in" units="millimolar"/>
      <variable name="A2_c" public_interface="in" units="millimolar"/>
      <variable initial_value="10" name="k16" units="second_order_rate_constant"/>
      <variable cmeta:id="v16_v16" name="v16" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v16</ci>
            <apply>
               <times/>
               <ci>k16</ci>
               <ci>A3_m</ci>
               <ci>A2_c</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v17">
      <variable name="hyd" public_interface="in" units="millimolar"/>
      <variable initial_value="0.02" name="k17" units="first_order_rate_constant"/>
      <variable cmeta:id="v17_v17" name="v17" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v17</ci>
            <apply>
               <times/>
               <ci>k17</ci>
               <ci>hyd</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v18">
      <variable name="oah" public_interface="in" units="millimolar"/>
      <variable initial_value="1" name="k18" units="first_order_rate_constant"/>
      <variable cmeta:id="v18_v18" name="v18" public_interface="out" units="flux"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v18</ci>
            <apply>
               <times/>
               <ci>k18</ci>
               <ci>oah</ci>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="S1" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="S" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="sul" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="aps" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="pap" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="hyd" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="cys" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="eth" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="aco" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="oxy" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="A_c" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="A3_c" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="A_m" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="A3_m" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="N" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="N2" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="oah" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="S1" component_2="v8"/>
      <map_variables variable_1="v8" variable_2="v8"/>
   </connection>
   <connection>
      <map_components component_1="S1" component_2="v9"/>
      <map_variables variable_1="S1" variable_2="S1"/>
      <map_variables variable_1="v9" variable_2="v9"/>
   </connection>
   <connection>
      <map_components component_1="S" component_2="v8"/>
      <map_variables variable_1="S2" variable_2="S2"/>
   </connection>
   <connection>
      <map_components component_1="S1" component_2="S"/>
      <map_variables variable_1="S1" variable_2="S1"/>
   </connection>
   <connection>
      <map_components component_1="sul" component_2="v1"/>
      <map_variables variable_1="v1" variable_2="v1"/>
   </connection>
   <connection>
      <map_components component_1="sul" component_2="v2"/>
      <map_variables variable_1="sul" variable_2="sul"/>
      <map_variables variable_1="v2" variable_2="v2"/>
   </connection>
   <connection>
      <map_components component_1="aps" component_2="v2"/>
      <map_variables variable_1="v2" variable_2="v2"/>
   </connection>
   <connection>
      <map_components component_1="aps" component_2="v3"/>
      <map_variables variable_1="aps" variable_2="aps"/>
      <map_variables variable_1="v3" variable_2="v3"/>
   </connection>
   <connection>
      <map_components component_1="pap" component_2="v3"/>
      <map_variables variable_1="v3" variable_2="v3"/>
   </connection>
   <connection>
      <map_components component_1="pap" component_2="v4"/>
      <map_variables variable_1="pap" variable_2="pap"/>
      <map_variables variable_1="v4" variable_2="v4"/>
   </connection>
   <connection>
      <map_components component_1="hyd" component_2="v4"/>
      <map_variables variable_1="v4" variable_2="v4"/>
   </connection>
   <connection>
      <map_components component_1="hyd" component_2="v5"/>
      <map_variables variable_1="hyd" variable_2="hyd"/>
      <map_variables variable_1="v5" variable_2="v5"/>
   </connection>
   <connection>
      <map_components component_1="hyd" component_2="v11A"/>
      <map_variables variable_1="hyd" variable_2="hyd"/>
   </connection>
   <connection>
      <map_components component_1="hyd" component_2="v17"/>
      <map_variables variable_1="hyd" variable_2="hyd"/>
      <map_variables variable_1="v17" variable_2="v17"/>
   </connection>
   <connection>
      <map_components component_1="cys" component_2="v1"/>
      <map_variables variable_1="cys" variable_2="cys"/>
   </connection>
   <connection>
      <map_components component_1="cys" component_2="v5"/>
      <map_variables variable_1="v5" variable_2="v5"/>
   </connection>
   <connection>
      <map_components component_1="cys" component_2="v6"/>
      <map_variables variable_1="cys" variable_2="cys"/>
      <map_variables variable_1="v6" variable_2="v6"/>
   </connection>
   <connection>
      <map_components component_1="eth" component_2="v13"/>
      <map_variables variable_1="v13" variable_2="v13"/>
   </connection>
   <connection>
      <map_components component_1="eth" component_2="v7"/>
      <map_variables variable_1="eth" variable_2="eth"/>
      <map_variables variable_1="v7" variable_2="v7"/>
   </connection>
   <connection>
      <map_components component_1="aco" component_2="v7"/>
      <map_variables variable_1="v7" variable_2="v7"/>
   </connection>
   <connection>
      <map_components component_1="aco" component_2="v8"/>
      <map_variables variable_1="aco" variable_2="aco"/>
      <map_variables variable_1="v8" variable_2="v8"/>
   </connection>
   <connection>
      <map_components component_1="aco" component_2="v15"/>
      <map_variables variable_1="aco" variable_2="aco"/>
      <map_variables variable_1="v15" variable_2="v15"/>
   </connection>
   <connection>
      <map_components component_1="oxy" component_2="v10"/>
      <map_variables variable_1="v10" variable_2="v10"/>
   </connection>
   <connection>
      <map_components component_1="oxy" component_2="v11A"/>
      <map_variables variable_1="oxy" variable_2="oxy"/>
      <map_variables variable_1="v11A" variable_2="v11A"/>
   </connection>
   <connection>
      <map_components component_1="oxy" component_2="v14"/>
      <map_variables variable_1="oxy" variable_2="oxy"/>
      <map_variables variable_1="v14" variable_2="v14"/>
   </connection>
   <connection>
      <map_components component_1="A3_m" component_2="v11B"/>
      <map_variables variable_1="A3_m" variable_2="A3_m"/>
      <map_variables variable_1="v11B" variable_2="v11B"/>
   </connection>
   <connection>
      <map_components component_1="A3_m" component_2="v16"/>
      <map_variables variable_1="A3_m" variable_2="A3_m"/>
      <map_variables variable_1="v16" variable_2="v16"/>
   </connection>
   <connection>
      <map_components component_1="N2" component_2="v4"/>
      <map_variables variable_1="N2" variable_2="N2"/>
      <map_variables variable_1="v4" variable_2="v4"/>
   </connection>
   <connection>
      <map_components component_1="N2" component_2="v7"/>
      <map_variables variable_1="v7" variable_2="v7"/>
   </connection>
   <connection>
      <map_components component_1="A_c" component_2="v16"/>
      <map_variables variable_1="A2_c" variable_2="A2_c"/>
   </connection>
   <connection>
      <map_components component_1="N2" component_2="v9"/>
      <map_variables variable_1="v9" variable_2="v9"/>
   </connection>
   <connection>
      <map_components component_1="N2" component_2="v11A"/>
      <map_variables variable_1="N2" variable_2="N2"/>
      <map_variables variable_1="v11A" variable_2="v11A"/>
   </connection>
   <connection>
      <map_components component_1="A3_c" component_2="v2"/>
      <map_variables variable_1="A3_c" variable_2="A3_c"/>
      <map_variables variable_1="v2" variable_2="v2"/>
   </connection>
   <connection>
      <map_components component_1="A3_c" component_2="v3"/>
      <map_variables variable_1="A3_c" variable_2="A3_c"/>
      <map_variables variable_1="v3" variable_2="v3"/>
   </connection>
   <connection>
      <map_components component_1="A3_c" component_2="v12"/>
      <map_variables variable_1="A3_c" variable_2="A3_c"/>
      <map_variables variable_1="v12" variable_2="v12"/>
   </connection>
   <connection>
      <map_components component_1="A3_c" component_2="v16"/>
      <map_variables variable_1="v16" variable_2="v16"/>
   </connection>
   <connection>
      <map_components component_1="oah" component_2="v5"/>
      <map_variables variable_1="oah" variable_2="oah"/>
      <map_variables variable_1="v5" variable_2="v5"/>
   </connection>
   <connection>
      <map_components component_1="oah" component_2="v15"/>
      <map_variables variable_1="v15" variable_2="v15"/>
   </connection>
   <connection>
      <map_components component_1="oah" component_2="v18"/>
      <map_variables variable_1="oah" variable_2="oah"/>
      <map_variables variable_1="v18" variable_2="v18"/>
   </connection>
   <connection>
      <map_components component_1="A_c" component_2="A3_c"/>
      <map_variables variable_1="A3_c" variable_2="A3_c"/>
   </connection>
   <connection>
      <map_components component_1="A_m" component_2="v11B"/>
      <map_variables variable_1="A2_m" variable_2="A2_m"/>
   </connection>
   <connection>
      <map_components component_1="A_m" component_2="A3_m"/>
      <map_variables variable_1="A3_m" variable_2="A3_m"/>
   </connection>
   <connection>
      <map_components component_1="N" component_2="v7"/>
      <map_variables variable_1="N1" variable_2="N1"/>
   </connection>
   <connection>
      <map_components component_1="N" component_2="v9"/>
      <map_variables variable_1="N1" variable_2="N1"/>
   </connection>
   <connection>
      <map_components component_1="N" component_2="N2"/>
      <map_variables variable_1="N2" variable_2="N2"/>
   </connection>
   <connection>
      <map_components component_1="v11A" component_2="v11B"/>
      <map_variables variable_1="v11A" variable_2="v11A"/>
   </connection>
</model>