// This CellML file was generated on 15/12/2009 at 2:00:25 at p.m. using:
//
// COR (0.9.31.1333)
// Copyright 2002-2009 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// comment: FN Geoff Nunns; This CellML version of the model does not run in PCEnv or COR, although the units are consistent throughout. Further curation is necessary, although this model does require non-negative constraints that are not currently available in CellML integration tools.
// created: W3CDTF 2008-07-07T00:00:00+12:00
// creator: Orgname Auckland Bioengineering Institute; Orgunit CellML Team; gnunns1@jhem.jhu.edu; Given Geoffrey; Family Nunns; Other Rogan
// reference: subject_type keyword; metabolism; cardiac; mitochondria
// reference: Pubmed_id 17591785; Given Fan; Family Wu; Given Feng; Family Yang; Given Kalyan; Family Vinnakota; Other C; Given Daniel; Family Beard; Other A; title Computer Modeling of Mitochondrial Tricarboxylic Acid Cycle, Oxidative Phosphorylation, Metabolite Transport, and Electrophysiology; volume 282; first_page 24525; title Journal of Biological Chemistry; W3CDTF 2007-00-00 00:00; last_page 24537
// comment: FN Geoff Nunns; This CellML version of the model does not run in PCEnv or COR, although the units are consistent throughout. Further curation is necessary, although this model does require non-negative constraints that are not currently available in CellML integration tools.
def model wu_yang_vinnakota_beard_2007 as
  // Computer Modeling of Mitochondrial Tricarboxylic Acid Cycle, Oxidative Phosphorylation, Metabolite Transport, and Electrophysiology
  //
  // Geoffrey Nunns
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML version of the model runs in OpenCell and COR to replicate the results of the original MATLAB code. The units are consistent. Note, to run the model the step size must be small in the order of 1e-6 and the tolerances are in the order of 1e-12.
  //
  // Model Structure
  //
  // ABSTRACT: A computational model of mitochondrial metabolism and electrophysiology is introduced and applied to analysis of data from isolated cardiac mitochondria and data on phosphate metabolites in striated muscle in vivo. This model is constructed based on detailed kinetics and thermodynamically balanced reaction mechanisms and a strict accounting of rapidly equilibrating biochemical species. Since building such a model requires introducing a large number of adjustable kinetic parameters, a correspondingly large amount of independent data from isolated mitochondria respiring on different substrates and subject to a variety of protocols is used to parameterize the model and ensure that it is challenged by a wide range of data corresponding to diverse conditions. The developed model is further validated by both in vitro data on isolated cardiac mitochondria and in vivo experimental measurements on human skeletal muscle. The validated model is used to predict the roles of NAD and ADP in regulating the tricarboxylic acid cycle dehydrogenase fluxes, demonstrating that NAD is the more important regulator. Further model predictions reveal that a decrease of cytosolic pH value results in decreases in mitochondrial membrane potential and a corresponding drop in the ability of the mitochondria to synthesize ATP at the hydrolysis potential required for cellular function.
  //
  // The original paper reference is cited below:
  //
  // Computer Modeling of Mitochondrial Tricarboxylic Acid Cycle, Oxidative Phosphorylation, Metabolite Transport, and Electrophysiology, Fan Wu, Feng Yang, Kalyan C. Vinnakota, Daniel A. Beard, 2007, Journal of Biological Chemistry, volume 282, no. 34. PubMed ID: 17591785 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=17591785&dopt=Abstract)
  //
  // model diagram
  //
  // Schematic diagram of the model components. The illustrated components include tricarboxylic acid cycle reactions, oxidative phosphorylation reactions, substrate and cation transport reactions, and passive permeation fluxes. External reactions are not illustrated here. The tricarboxylic acid reactions are numbered 1-11. 1, pyruvate dehydrogenase; 2, citrate synthase; 3, aconitase; 4, isocitrate dehydrogenase; 5, alpha-ketoglutarate dehydrogenase; 6, succinyl-CoA synthetase; 7, succinate dehydrogenase; 8, fumarase; 9, malate dehydrogenase; 10, nucleoside diphosphokinase; 11, glutamate oxaloacetate transaminase.
  def unit cell as base unit;
  def unit cytoplasm as base unit;
  def unit mitochondria as base unit;
  def unit cyto_per_cell as
    unit cytoplasm;
    unit cell {expo: -1};
  enddef;
  def unit mito_per_cyto as
    unit mitochondria;
    unit cytoplasm {expo: -1};
  enddef;
  def unit mito_per_cell as
    unit mitochondria;
    unit cell {expo: -1};
  enddef;
  def unit l_cyto_per_l_mito as
    unit cytoplasm;
    unit mitochondria {expo: -1};
  enddef;
  def unit l_water_per_l_cyto as
    unit cytoplasm {expo: -1};
  enddef;
  def unit l_water_per_l_mito as
    unit mitochondria {expo: -1};
  enddef;
  def unit mg_per_mitochondria as
    unit gram {pref: milli};
    unit mitochondria {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit liter {expo: -1};
  enddef;
  def unit molar_per_second as
    unit molar;
    unit second {expo: -1};
  enddef;
  def unit molar_squared as
    unit molar {expo: 2};
  enddef;
  def unit molar_cubed as
    unit molar {expo: 3};
  enddef;
  def unit per_molar as
    unit molar {expo: -1};
  enddef;
  def unit per_molar_squared as
    unit molar {expo: -2};
  enddef;
  def unit micrometer_per_second as
    unit meter {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit per_micrometer as
    unit meter {expo: -1, pref: micro};
    unit mitochondria {expo: -1};
  enddef;
  def unit kilojoule_per_mole as
    unit joule {pref: kilo};
    unit mole {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit kilojoule_per_mole_per_millivolt as
    unit kilojoule_per_mole;
    unit millivolt {expo: -1};
  enddef;
  def unit molar_per_cyto as
    unit mole;
    unit liter {expo: -1};
    unit cytoplasm {expo: -1};
  enddef;
  def unit molar_per_mito as
    unit mole;
    unit liter {expo: -1};
    unit mitochondria {expo: -1};
  enddef;
  def unit mole_per_second_per_l_cyto_volume as
    unit molar_per_cyto;
    unit second {expo: -1};
  enddef;
  def unit mole_per_second_per_l_cyto_volume_per_molar_per_molar as
    unit mole_per_second_per_l_cyto_volume;
    unit molar {expo: -2};
  enddef;
  def unit mole_per_second_per_l_mito_volume as
    unit molar_per_mito;
    unit second {expo: -1};
  enddef;
  def unit mole_per_second_per_l_mito_volume_per_molar as
    unit mole_per_second_per_l_mito_volume;
    unit molar {expo: -1};
  enddef;
  def unit mole_per_second_per_l_mito_volume_per_molar_per_half_molar as
    unit mole_per_second_per_l_mito_volume_per_molar;
    unit molar {expo: -0.5};
  enddef;
  def unit mole_per_second_per_l_mito_volume_per_molar_per_molar as
    unit mole_per_second_per_l_mito_volume_per_molar;
    unit molar {expo: -1};
  enddef;
  def unit mole_per_l_mito_volume_per_mv as
    unit molar_per_mito;
    unit millivolt {expo: -1};
  enddef;
  def unit mole_per_second_per_l_mito_volume_per_molar_per_mv as
    unit mole_per_second_per_l_mito_volume_per_molar;
    unit millivolt {expo: -1};
  enddef;
  def unit joule_per_kelvin_per_mole as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit joule_per_kilojoule as
    unit joule;
    unit joule {expo: -1, pref: kilo};
  enddef;

  def comp Environment as
    var time: second {pub: out};
    var ExpType: dimensionless {init: 1, pub: out};
    var StateType: dimensionless {init: 2, pub: out};
  enddef;

  def comp parameters as
    var F: kilojoule_per_mole_per_millivolt {init: 0.096484, pub: out};
    var V_cyto: cyto_per_cell {pub: out};
    var V_mito: mito_per_cell {pub: out};
    var W_x: l_water_per_l_mito {init: 0.651384, pub: out};
    var W_i: l_water_per_l_mito {init: 0.072376, pub: out};
    var W_c: l_water_per_l_cyto {pub: out};
    var gamma: per_micrometer {init: 5.99, pub: out};
    var rho_m: mg_per_mitochondria {init: 2.725e5, pub: out};
    var n_A: dimensionless {init: 3, pub: out};
    var p_PI: micrometer_per_second {init: 327, pub: out};
    var p_A: micrometer_per_second {init: 85, pub: out};
    var p_TI: micrometer_per_second {init: 85, pub: out};
    var k_mADP: molar {init: 3.5e-6, pub: out};
    var theta: dimensionless {init: 0.6, pub: out};
    var k_O2: molar {init: 1.2e-4, pub: out};
    var NAD_tot: molar {init: 2.97e-3, pub: out};
    var Q_tot: molar {init: 1.35e-3, pub: out};
    var cytC_tot: molar {init: 2.7e-3, pub: out};
    var A_tot: molar {init: 10e-3, pub: out};
    var CR_tot: molar {init: 42.7e-3, pub: out};
    var CO2_tot_x: molar {init: 21.4e-3, pub: out};
    var FAD_tot: molar {init: 1e-4, pub: out};
    var C_IM: mole_per_l_mito_volume_per_mv {init: 6.75e-6, pub: out};
    var X_pdh: mole_per_second_per_l_mito_volume {init: 0.205093643103884, pub: out};
    var X_cits: mole_per_second_per_l_mito_volume {init: 9.82530750761898, pub: out};
    var X_acon: mole_per_second_per_l_mito_volume {init: 0.027665411180519, pub: out};
    var X_isod: mole_per_second_per_l_mito_volume {init: 0.492047553306503, pub: out};
    var X_akgd: mole_per_second_per_l_mito_volume {init: 0.087630003425524, pub: out};
    var K_ir_akgd: molar {init: 6.04e-7, pub: out};
    var X_scoas: mole_per_second_per_l_mito_volume {init: 0.448520452008943, pub: out};
    var X_sdh: mole_per_second_per_l_mito_volume {init: 0.08578867843174, pub: out};
    var X_fum: mole_per_second_per_l_mito_volume {init: 0.00707728025683, pub: out};
    var X_mdh: mole_per_second_per_l_mito_volume {init: 0.077060004692409, pub: out};
    var X_ndk: mole_per_second_per_l_mito_volume {init: 0.025543515147654, pub: out};
    var X_got: mole_per_second_per_l_mito_volume {init: 4.551391837332316, pub: out};
    var X_PYRH: mole_per_second_per_l_mito_volume_per_molar_per_molar {init: 2.996779273769102e8, pub: out};
    var X_GLUH: mole_per_second_per_l_mito_volume_per_molar_per_molar {init: 2.725114215177993e8, pub: out};
    var X_CITMAL: mole_per_second_per_l_mito_volume_per_molar_per_molar {init: 80.432110322866379, pub: out};
    var X_AKGMAL: mole_per_second_per_l_mito_volume {init: 0.282091450119444, pub: out};
    var X_SUCMAL: mole_per_second_per_l_mito_volume_per_molar_per_molar {init: 96.995618247389871, pub: out};
    var X_MALPI: mole_per_second_per_l_mito_volume_per_molar_per_molar {init: 16.062441848715917, pub: out};
    var X_ASPGLU: mole_per_second_per_l_mito_volume {init: 5.865621634754698e-5, pub: out};
    var X_C1: mole_per_second_per_l_mito_volume_per_molar_per_molar {init: 3.236481869934019e4, pub: out};
    var X_C3: mole_per_second_per_l_mito_volume_per_molar_per_half_molar {init: 0.790813746051711, pub: out};
    var k_PI_1: molar {init: 3.248913595933763e-5, pub: out};
    var k_PI_2: molar {init: 0.003474542589709, pub: out};
    var X_C4: mole_per_second_per_l_mito_volume_per_molar {init: 1.076088893810943e-4, pub: out};
    var X_F1: mole_per_second_per_l_mito_volume_per_molar {init: 8.120393248498723e3, pub: out};
    var X_ANT: mole_per_second_per_l_mito_volume {init: 0.007522124149343, pub: out};
    var X_PiHt: mole_per_second_per_l_mito_volume_per_molar {init: 3.335568500871044e7, pub: out};
    var k_PiHt: molar {init: 0.00161251709168, pub: out};
    var X_KH: mole_per_second_per_l_mito_volume_per_molar_per_molar {init: 4.758023126099895e6, pub: out};
    var X_Hle: mole_per_second_per_l_mito_volume_per_molar_per_mv {init: 3.02092849850504e2, pub: out};
    var X_HK: mole_per_second_per_l_cyto_volume {pub: out};
    var J_AtC: mole_per_second_per_l_cyto_volume {init: 0, pub: out};
    var ExpType: dimensionless {pub: in};
    var StateType: dimensionless {pub: in};
    W_c = sel
      case ExpType == 1{dimensionless}:
        80{l_water_per_l_cyto};
      case ExpType == 2{dimensionless}:
        800{l_water_per_l_cyto};
      case (ExpType == 3{dimensionless}) or (ExpType == 4{dimensionless}):
        0.807{dimensionless}*1.044{l_water_per_l_cyto};
      otherwise:
        80{l_water_per_l_cyto};
    endsel;
    V_mito = sel
      case ExpType == 3{dimensionless}:
        0.2882{mito_per_cell};
      case ExpType == 4{dimensionless}:
        0.056{mito_per_cell};
      otherwise:
        0{mito_per_cell};
    endsel;
    V_cyto = sel
      case ExpType == 3{dimensionless}:
        0.6801{cyto_per_cell};
      case ExpType == 4{dimensionless}:
        0.894{cyto_per_cell};
      otherwise:
        1{cyto_per_cell};
    endsel;
    X_HK = sel
      case (ExpType == 1{dimensionless}) and (StateType == 3{dimensionless}):
        0.10710811279097{mole_per_second_per_l_cyto_volume};
      otherwise:
        0{mole_per_second_per_l_cyto_volume};
    endsel;
  enddef;

  def comp thermodynamic_data as
    var RT: kilojoule_per_mole {pub: out};
    var dGf1_H2O: kilojoule_per_mole {init: -235.74, pub: out};
    var dGf1_O2: kilojoule_per_mole {init: 16.4, pub: out};
    var dGf1_NADH: kilojoule_per_mole {init: 39.31, pub: out};
    var dGf1_NAD: kilojoule_per_mole {init: 18.1, pub: out};
    var dGf1_QH2: kilojoule_per_mole {init: -23.3, pub: out};
    var dGf1_COQ: kilojoule_per_mole {init: 65.17, pub: out};
    var dGf1_ATP: kilojoule_per_mole {init: -2771, pub: out};
    var dGf1_ADP: kilojoule_per_mole {init: -1903.96, pub: out};
    var dGf1_AMP: kilojoule_per_mole {init: -1034.66, pub: out};
    var dGf1_GTP: kilojoule_per_mole {init: -2771, pub: out};
    var dGf1_GDP: kilojoule_per_mole {init: -1903.96, pub: out};
    var dGf1_Cred: kilojoule_per_mole {init: -27.41, pub: out};
    var dGf1_Cox: kilojoule_per_mole {init: -6.52, pub: out};
    var dGf1_Pi: kilojoule_per_mole {init: -1098.27, pub: out};
    var dGf1_PCr: kilojoule_per_mole {init: 0, pub: out};
    var dGf1_Cr: kilojoule_per_mole {init: -252.68, pub: out};
    var dGf1_FADH2: kilojoule_per_mole {init: -67.6, pub: out};
    var dGf1_FAD: kilojoule_per_mole {init: 19.55, pub: out};
    var dGf1_COASH: kilojoule_per_mole {init: -0.72, pub: out};
    var dGf1_ACCOA: kilojoule_per_mole {init: -178.19, pub: out};
    var dGf1_OAA: kilojoule_per_mole {init: -794.74, pub: out};
    var dGf1_CIT: kilojoule_per_mole {init: -1165.59, pub: out};
    var dGf1_ICIT: kilojoule_per_mole {init: -1158.94, pub: out};
    var dGf1_AKG: kilojoule_per_mole {init: -793.41, pub: out};
    var dGf1_SCOA: kilojoule_per_mole {init: -507.55, pub: out};
    var dGf1_SUC: kilojoule_per_mole {init: -690.44, pub: out};
    var dGf1_FUM: kilojoule_per_mole {init: -603.32, pub: out};
    var dGf1_MAL: kilojoule_per_mole {init: -842.66, pub: out};
    var dGf1_ASP: kilojoule_per_mole {init: -692.26, pub: out};
    var dGf1_GLU: kilojoule_per_mole {init: -692.4, pub: out};
    var dGf1_CO2_tot: kilojoule_per_mole {init: -530.71, pub: out};
    var dGf1_PYR: kilojoule_per_mole {init: -470.82, pub: out};
    var dGf1_GLC: kilojoule_per_mole {init: -907.21, pub: out};
    var dGf1_G6P: kilojoule_per_mole {init: -1758.87, pub: out};
    var ExpType: dimensionless {pub: in};
    RT = sel
      case ExpType == 1{dimensionless}:
        8.314{joule_per_kelvin_per_mole}*(28{kelvin}+273.15{kelvin})/1e3{joule_per_kilojoule};
      otherwise:
        8.314{joule_per_kelvin_per_mole}*(37{kelvin}+273.15{kelvin})/1e3{joule_per_kilojoule};
    endsel;
  enddef;

  def comp P_ATP as
    var P_ATP_x: dimensionless {pub: out};
    var P_ATP_i: dimensionless {pub: out};
    var P_ATP_c: dimensionless {pub: out};
    var uATP_x: molar {pub: out};
    var mATP_c: molar {pub: out};
    var K_H: molar {pub: out};
    var K_Mg: molar {pub: out};
    var K_K: molar {pub: out};
    var ATP_x: molar {pub: in};
    var H_x: molar {pub: in};
    var Mg_x: molar {pub: in};
    var K_x: molar {pub: in};
    var H_i: molar {pub: in};
    var Mg_i: molar {pub: in};
    var K_i: molar {pub: in};
    var ATP_c: molar {pub: in};
    var H_c: molar {pub: in};
    var Mg_c: molar {pub: in};
    var K_c: molar {pub: in};
    K_H = 1{molar}*pow(10{dimensionless}, -6.59{dimensionless});
    K_Mg = 1{molar}*pow(10{dimensionless}, -3.82{dimensionless});
    K_K = 1{molar}*pow(10{dimensionless}, -1.013{dimensionless});
    P_ATP_x = 1{dimensionless}+H_x/K_H+Mg_x/K_Mg+K_x/K_K;
    P_ATP_i = 1{dimensionless}+H_i/K_H+Mg_i/K_Mg+K_i/K_K;
    P_ATP_c = 1{dimensionless}+H_c/K_H+Mg_c/K_Mg+K_c/K_K;
    uATP_x = ATP_x*(1{dimensionless}+H_x/K_H)/P_ATP_x;
    mATP_c = ATP_c*Mg_c/K_Mg/P_ATP_c;
  enddef;

  def comp P_ADP as
    var P_ADP_x: dimensionless {pub: out};
    var P_ADP_i: dimensionless {pub: out};
    var P_ADP_c: dimensionless {pub: out};
    var uADP_x: molar {pub: out};
    var mADP_c: molar {pub: out};
    var K_H: molar {pub: out};
    var K_Mg: molar {pub: out};
    var K_K: molar {pub: out};
    var ADP_x: molar {pub: in};
    var H_x: molar {pub: in};
    var Mg_x: molar {pub: in};
    var K_x: molar {pub: in};
    var H_i: molar {pub: in};
    var Mg_i: molar {pub: in};
    var K_i: molar {pub: in};
    var ADP_c: molar {pub: in};
    var H_c: molar {pub: in};
    var Mg_c: molar {pub: in};
    var K_c: molar {pub: in};
    K_H = 1{molar}*pow(10{dimensionless}, -6.42{dimensionless});
    K_Mg = 1{molar}*pow(10{dimensionless}, -2.79{dimensionless});
    K_K = 1{molar}*pow(10{dimensionless}, -0.882{dimensionless});
    P_ADP_x = 1{dimensionless}+H_x/K_H+Mg_x/K_Mg+K_x/K_K;
    P_ADP_i = 1{dimensionless}+H_i/K_H+Mg_i/K_Mg+K_i/K_K;
    P_ADP_c = 1{dimensionless}+H_c/K_H+Mg_c/K_Mg+K_c/K_K;
    uADP_x = ADP_x*(1{dimensionless}+H_x/K_H)/P_ADP_x;
    mADP_c = ADP_c*Mg_c/K_Mg/P_ADP_c;
  enddef;

  def comp P_AMP as
    var P_AMP_x: dimensionless {pub: out};
    var P_AMP_i: dimensionless {pub: out};
    var P_AMP_c: dimensionless {pub: out};
    var uAMP_x: molar {pub: out};
    var K_H: molar {pub: out};
    var K_Mg: molar {pub: out};
    var K_K: molar {pub: out};
    var AMP_x: molar {pub: in};
    var H_x: molar {pub: in};
    var Mg_x: molar {pub: in};
    var K_x: molar {pub: in};
    var H_i: molar {pub: in};
    var Mg_i: molar {pub: in};
    var K_i: molar {pub: in};
    var H_c: molar {pub: in};
    var Mg_c: molar {pub: in};
    var K_c: molar {pub: in};
    K_H = 1{molar}*pow(10{dimensionless}, -6.22{dimensionless});
    K_Mg = 1{molar}*pow(10{dimensionless}, -1.86{dimensionless});
    K_K = 1{molar}*pow(10{dimensionless}, -0.6215{dimensionless});
    P_AMP_x = 1{dimensionless}+H_x/K_H+Mg_x/K_Mg+K_x/K_K;
    P_AMP_i = 1{dimensionless}+H_i/K_H+Mg_i/K_Mg+K_i/K_K;
    P_AMP_c = 1{dimensionless}+H_c/K_H+Mg_c/K_Mg+K_c/K_K;
    uAMP_x = AMP_x*(1{dimensionless}+H_x/K_H)/P_AMP_x;
  enddef;

  def comp P_GTP as
    var P_GTP_x: dimensionless {pub: out};
    var P_ATP_x: dimensionless {pub: in};
    var P_GTP_i: dimensionless {pub: out};
    var P_ATP_i: dimensionless {pub: in};
    var P_GTP_c: dimensionless {pub: out};
    var P_ATP_c: dimensionless {pub: in};
    var uGTP_x: molar {pub: out};
    var K_H: molar {pub: out};
    var K_Mg: molar {pub: out};
    var K_K: molar {pub: out};
    var GTP_x: molar {pub: in};
    var H_x: molar {pub: in};
    var K_H_ATP: molar {pub: in};
    var K_Mg_ATP: molar {pub: in};
    var K_K_ATP: molar {pub: in};
    P_GTP_x = P_ATP_x;
    P_GTP_i = P_ATP_i;
    P_GTP_c = P_ATP_c;
    K_H = K_H_ATP;
    K_Mg = K_Mg_ATP;
    K_K = K_K_ATP;
    uGTP_x = GTP_x*(1{dimensionless}+H_x/K_H)/P_GTP_x;
  enddef;

  def comp P_GDP as
    var P_GDP_x: dimensionless {pub: out};
    var P_ADP_x: dimensionless {pub: in};
    var P_GDP_i: dimensionless {pub: out};
    var P_ADP_i: dimensionless {pub: in};
    var P_GDP_c: dimensionless {pub: out};
    var P_ADP_c: dimensionless {pub: in};
    var uGDP_x: molar {pub: out};
    var K_H: molar {pub: out};
    var K_Mg: molar {pub: out};
    var K_K: molar {pub: out};
    var GDP_x: molar {pub: in};
    var H_x: molar {pub: in};
    var K_H_ADP: molar {pub: in};
    var K_Mg_ADP: molar {pub: in};
    var K_K_ADP: molar {pub: in};
    P_GDP_x = P_ADP_x;
    P_GDP_i = P_ADP_i;
    P_GDP_c = P_ADP_c;
    K_H = K_H_ADP;
    K_Mg = K_Mg_ADP;
    K_K = K_K_ADP;
    uGDP_x = GDP_x*(1{dimensionless}+H_x/K_H)/P_GDP_x;
  enddef;

  def comp P_PI as
    var P_PI_x: dimensionless {pub: out};
    var P_PI_i: dimensionless {pub: out};
    var P_PI_c: dimensionless {pub: out};
    var hPI_x: molar {pub: out};
    var hPI_i: molar {pub: out};
    var PI_x: molar {pub: in};
    var H_x: molar {pub: in};
    var Mg_x: molar {pub: in};
    var K_x: molar {pub: in};
    var PI_i: molar {pub: in};
    var H_i: molar {pub: in};
    var Mg_i: molar {pub: in};
    var K_i: molar {pub: in};
    var H_c: molar {pub: in};
    var Mg_c: molar {pub: in};
    var K_c: molar {pub: in};
    var K_H: molar {pub: out};
    var K_Mg: molar {pub: out};
    var K_K: molar {pub: out};
    K_H = 1{molar}*pow(10{dimensionless}, -6.71{dimensionless});
    K_Mg = 1{molar}*pow(10{dimensionless}, -1.69{dimensionless});
    K_K = 1{molar}*pow(10{dimensionless}, 0.0074{dimensionless});
    P_PI_x = 1{dimensionless}+H_x/K_H+Mg_x/K_Mg+K_x/K_K;
    P_PI_i = 1{dimensionless}+H_i/K_H+Mg_i/K_Mg+K_i/K_K;
    P_PI_c = 1{dimensionless}+H_c/K_H+Mg_c/K_Mg+K_c/K_K;
    hPI_x = PI_x*H_x/K_H/P_PI_x;
    hPI_i = PI_i*H_i/K_H/P_PI_i;
  enddef;

  def comp P_COASH as
    var P_COASH_x: dimensionless {pub: out};
    var P_COASH_i: dimensionless {pub: out};
    var P_COASH_c: dimensionless {pub: out};
    var H_x: molar {pub: in};
    var H_i: molar {pub: in};
    var H_c: molar {pub: in};
    var K_H: molar {pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    K_H = 1{molar}*pow(10{dimensionless}, -8.13{dimensionless});
    P_COASH_x = 1{dimensionless}+H_x/K_H;
    P_COASH_i = 1{dimensionless}+H_i/K_H;
    P_COASH_c = 1{dimensionless}+H_c/K_H;
  enddef;

  def comp P_OAA as
    var P_OAA_x: dimensionless {pub: out};
    var P_OAA_i: dimensionless {pub: out};
    var P_OAA_c: dimensionless {pub: out};
    var Mg_x: molar {pub: in};
    var Mg_i: molar {pub: in};
    var Mg_c: molar {pub: in};
    var K_Mg: molar {pub: out};
    var K_H: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    K_Mg = 1{molar}*pow(10{dimensionless}, -0.8629{dimensionless});
    P_OAA_x = 1{dimensionless}+Mg_x/K_Mg;
    P_OAA_i = 1{dimensionless}+Mg_i/K_Mg;
    P_OAA_c = 1{dimensionless}+Mg_c/K_Mg;
  enddef;

  def comp P_CIT as
    var P_CIT_x: dimensionless {pub: out};
    var P_CIT_i: dimensionless {pub: out};
    var P_CIT_c: dimensionless {pub: out};
    var uCIT_x: molar {pub: out};
    var uCIT_i: molar {pub: out};
    var hCIT_x: molar {pub: out};
    var hCIT_i: molar {pub: out};
    var CIT_x: molar {pub: in};
    var H_x: molar {pub: in};
    var Mg_x: molar {pub: in};
    var K_x: molar {pub: in};
    var CIT_i: molar {pub: in};
    var H_i: molar {pub: in};
    var Mg_i: molar {pub: in};
    var K_i: molar {pub: in};
    var H_c: molar {pub: in};
    var Mg_c: molar {pub: in};
    var K_c: molar {pub: in};
    var K_H: molar {pub: out};
    var K_Mg: molar {pub: out};
    var K_K: molar {pub: out};
    K_H = 1{molar}*pow(10{dimensionless}, -5.63{dimensionless});
    K_Mg = 1{molar}*pow(10{dimensionless}, -3.37{dimensionless});
    K_K = 1{molar}*pow(10{dimensionless}, -0.339{dimensionless});
    P_CIT_x = 1{dimensionless}+H_x/K_H+Mg_x/K_Mg+K_x/K_K;
    P_CIT_i = 1{dimensionless}+H_i/K_H+Mg_i/K_Mg+K_i/K_K;
    P_CIT_c = 1{dimensionless}+H_c/K_H+Mg_c/K_Mg+K_c/K_K;
    uCIT_x = CIT_x*(1{dimensionless}+H_x/K_H)/P_CIT_x;
    uCIT_i = CIT_i*(1{dimensionless}+H_i/K_H)/P_CIT_i;
    hCIT_x = CIT_x*H_x/K_H/P_CIT_x;
    hCIT_i = CIT_i*H_i/K_H/P_CIT_i;
  enddef;

  def comp P_ICIT as
    var P_ICIT_x: dimensionless {pub: out};
    var P_ICIT_i: dimensionless {pub: out};
    var P_ICIT_c: dimensionless {pub: out};
    var H_x: molar {pub: in};
    var Mg_x: molar {pub: in};
    var H_i: molar {pub: in};
    var Mg_i: molar {pub: in};
    var H_c: molar {pub: in};
    var Mg_c: molar {pub: in};
    var K_H: molar {pub: out};
    var K_Mg: molar {pub: out};
    var K_K: molar {init: 1e20, pub: out};
    K_H = 1{molar}*pow(10{dimensionless}, -5.64{dimensionless});
    K_Mg = 1{molar}*pow(10{dimensionless}, -2.46{dimensionless});
    P_ICIT_x = 1{dimensionless}+H_x/K_H+Mg_x/K_Mg;
    P_ICIT_i = 1{dimensionless}+H_i/K_H+Mg_i/K_Mg;
    P_ICIT_c = 1{dimensionless}+H_c/K_H+Mg_c/K_Mg;
  enddef;

  def comp P_SCOA as
    var P_SCOA_x: dimensionless {pub: out};
    var P_SCOA_i: dimensionless {pub: out};
    var P_SCOA_c: dimensionless {pub: out};
    var H_x: molar {pub: in};
    var H_i: molar {pub: in};
    var H_c: molar {pub: in};
    var K_H: molar {pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    K_H = 1{molar}*pow(10{dimensionless}, -3.96{dimensionless});
    P_SCOA_x = 1{dimensionless}+H_x/K_H;
    P_SCOA_i = 1{dimensionless}+H_i/K_H;
    P_SCOA_c = 1{dimensionless}+H_c/K_H;
  enddef;

  def comp P_SUC as
    var P_SUC_x: dimensionless {pub: out};
    var P_SUC_i: dimensionless {pub: out};
    var P_SUC_c: dimensionless {pub: out};
    var H_x: molar {pub: in};
    var Mg_x: molar {pub: in};
    var K_x: molar {pub: in};
    var H_i: molar {pub: in};
    var Mg_i: molar {pub: in};
    var K_i: molar {pub: in};
    var H_c: molar {pub: in};
    var Mg_c: molar {pub: in};
    var K_c: molar {pub: in};
    var K_H: molar {pub: out};
    var K_Mg: molar {pub: out};
    var K_K: molar {pub: out};
    K_H = 1{molar}*pow(10{dimensionless}, -5.13{dimensionless});
    K_Mg = 1{molar}*pow(10{dimensionless}, -1.17{dimensionless});
    K_K = 1{molar}*pow(10{dimensionless}, -0.3525{dimensionless});
    P_SUC_x = 1{dimensionless}+H_x/K_H+Mg_x/K_Mg+K_x/K_K;
    P_SUC_i = 1{dimensionless}+H_i/K_H+Mg_i/K_Mg+K_i/K_K;
    P_SUC_c = 1{dimensionless}+H_c/K_H+Mg_c/K_Mg+K_c/K_K;
  enddef;

  def comp P_FUM as
    var P_FUM_x: dimensionless {pub: out};
    var P_FUM_i: dimensionless {pub: out};
    var P_FUM_c: dimensionless {pub: out};
    var H_x: molar {pub: in};
    var H_i: molar {pub: in};
    var H_c: molar {pub: in};
    var K_H: molar {pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    K_H = 1{molar}*pow(10{dimensionless}, -4.1{dimensionless});
    P_FUM_x = 1{dimensionless}+H_x/K_H;
    P_FUM_i = 1{dimensionless}+H_i/K_H;
    P_FUM_c = 1{dimensionless}+H_c/K_H;
  enddef;

  def comp P_MAL as
    var P_MAL_x: dimensionless {pub: out};
    var P_MAL_i: dimensionless {pub: out};
    var P_MAL_c: dimensionless {pub: out};
    var H_x: molar {pub: in};
    var Mg_x: molar {pub: in};
    var K_x: molar {pub: in};
    var H_i: molar {pub: in};
    var Mg_i: molar {pub: in};
    var K_i: molar {pub: in};
    var H_c: molar {pub: in};
    var Mg_c: molar {pub: in};
    var K_c: molar {pub: in};
    var K_H: molar {pub: out};
    var K_Mg: molar {pub: out};
    var K_K: molar {pub: out};
    K_H = 1{molar}*pow(10{dimensionless}, -4.75{dimensionless});
    K_Mg = 1{molar}*pow(10{dimensionless}, -1.55{dimensionless});
    K_K = 1{molar}*pow(10{dimensionless}, 0.107{dimensionless});
    P_MAL_x = 1{dimensionless}+H_x/K_H+Mg_x/K_Mg+K_x/K_K;
    P_MAL_i = 1{dimensionless}+H_i/K_H+Mg_i/K_Mg+K_i/K_K;
    P_MAL_c = 1{dimensionless}+H_c/K_H+Mg_c/K_Mg+K_c/K_K;
  enddef;

  def comp P_CO2_tot as
    var P_CO2_tot_x: dimensionless {pub: out};
    var P_CO2_tot_i: dimensionless {pub: out};
    var P_CO2_tot_c: dimensionless {pub: out};
    var H_x: molar {pub: in};
    var H_i: molar {pub: in};
    var H_c: molar {pub: in};
    var K_H: molar {pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    K_H = 1{molar}*pow(10{dimensionless}, -9.82{dimensionless});
    P_CO2_tot_x = 1{dimensionless}+H_x/K_H;
    P_CO2_tot_i = 1{dimensionless}+H_i/K_H;
    P_CO2_tot_c = 1{dimensionless}+H_c/K_H;
  enddef;

  def comp P_PYR as
    var P_PYR_x: dimensionless {pub: out};
    var P_PYR_i: dimensionless {pub: out};
    var P_PYR_c: dimensionless {pub: out};
    var Mg_x: molar {pub: in};
    var Mg_i: molar {pub: in};
    var Mg_c: molar {pub: in};
    var K_Mg: molar {pub: out};
    var K_H: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    K_Mg = 1{molar}*pow(10{dimensionless}, -1.02{dimensionless});
    P_PYR_x = 1{dimensionless}+Mg_x/K_Mg;
    P_PYR_i = 1{dimensionless}+Mg_i/K_Mg;
    P_PYR_c = 1{dimensionless}+Mg_c/K_Mg;
  enddef;

  def comp P_G6P as
    var P_G6P_x: dimensionless {pub: out};
    var P_G6P_i: dimensionless {pub: out};
    var P_G6P_c: dimensionless {pub: out};
    var H_x: molar {pub: in};
    var H_i: molar {pub: in};
    var H_c: molar {pub: in};
    var K_H: molar {pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    K_H = 1{molar}*pow(10{dimensionless}, -5.91{dimensionless});
    P_G6P_x = 1{dimensionless}+H_x/K_H;
    P_G6P_i = 1{dimensionless}+H_i/K_H;
    P_G6P_c = 1{dimensionless}+H_c/K_H;
  enddef;

  def comp P_GLU as
    var P_GLU_x: dimensionless {pub: out};
    var P_GLU_i: dimensionless {pub: out};
    var P_GLU_c: dimensionless {pub: out};
    var H_x: molar {pub: in};
    var Mg_x: molar {pub: in};
    var H_i: molar {pub: in};
    var Mg_i: molar {pub: in};
    var H_c: molar {pub: in};
    var Mg_c: molar {pub: in};
    var K_H: molar {pub: out};
    var K_Mg: molar {pub: out};
    var K_K: molar {init: 1e20, pub: out};
    K_H = 1{molar}*pow(10{dimensionless}, -4.06{dimensionless});
    K_Mg = 1{molar}*pow(10{dimensionless}, -1.82{dimensionless});
    P_GLU_x = 1{dimensionless}+H_x/K_H+Mg_x/K_Mg;
    P_GLU_i = 1{dimensionless}+H_i/K_H+Mg_i/K_Mg;
    P_GLU_c = 1{dimensionless}+H_c/K_H+Mg_c/K_Mg;
  enddef;

  def comp P_ASP as
    var P_ASP_x: dimensionless {pub: out};
    var P_ASP_i: dimensionless {pub: out};
    var P_ASP_c: dimensionless {pub: out};
    var H_x: molar {pub: in};
    var Mg_x: molar {pub: in};
    var H_i: molar {pub: in};
    var Mg_i: molar {pub: in};
    var H_c: molar {pub: in};
    var Mg_c: molar {pub: in};
    var K_H: molar {pub: out};
    var K_Mg: molar {pub: out};
    var K_K: molar {init: 1e20, pub: out};
    K_H = 1{molar}*pow(10{dimensionless}, -3.65{dimensionless});
    K_Mg = 1{molar}*pow(10{dimensionless}, -2.32{dimensionless});
    P_ASP_x = 1{dimensionless}+H_x/K_H+Mg_x/K_Mg;
    P_ASP_i = 1{dimensionless}+H_i/K_H+Mg_i/K_Mg;
    P_ASP_c = 1{dimensionless}+H_c/K_H+Mg_c/K_Mg;
  enddef;

  def comp P_GLC as
    var P_GLC_c: dimensionless {pub: out};
    var K_H: molar {init: 1e20, pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    P_GLC_c = 1{dimensionless};
  enddef;

  def comp P_NAD as
    var P_NAD_x: dimensionless {pub: out};
    var K_H: molar {init: 1e20, pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    P_NAD_x = 1{dimensionless};
  enddef;

  def comp P_NADH as
    var P_NADH_x: dimensionless {pub: out};
    var K_H: molar {init: 1e20, pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    P_NADH_x = 1{dimensionless};
  enddef;

  def comp P_QH2 as
    var P_QH2_x: dimensionless {pub: out};
    var K_H: molar {init: 1e20, pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    P_QH2_x = 1{dimensionless};
  enddef;

  def comp P_COQ as
    var P_COQ_x: dimensionless {pub: out};
    var K_H: molar {init: 1e20, pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    P_COQ_x = 1{dimensionless};
  enddef;

  def comp P_ACCOA as
    var P_ACCOA_x: dimensionless {pub: out};
    var K_H: molar {init: 1e20, pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    P_ACCOA_x = 1{dimensionless};
  enddef;

  def comp P_AKG as
    var P_AKG_x: dimensionless {pub: out};
    var K_H: molar {init: 1e20, pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    P_AKG_x = 1{dimensionless};
  enddef;

  def comp P_O2 as
    var P_O2_x: dimensionless {pub: out};
    var K_H: molar {init: 1e20, pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    P_O2_x = 1{dimensionless};
  enddef;

  def comp P_FADH2 as
    var P_FADH2_x: dimensionless {pub: out};
    var K_H: molar {init: 1e20, pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    P_FADH2_x = 1{dimensionless};
  enddef;

  def comp P_FAD as
    var P_FAD_x: dimensionless {pub: out};
    var K_H: molar {init: 1e20, pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    P_FAD_x = 1{dimensionless};
  enddef;

  def comp P_H as
    var P_H_x: dimensionless {pub: out};
    var K_H: molar {init: 1e20, pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    P_H_x = 1{dimensionless};
  enddef;

  def comp P_Mg as
    var P_Mg_x: dimensionless {pub: out};
    var K_H: molar {init: 1e20, pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    P_Mg_x = 1{dimensionless};
  enddef;

  def comp P_K as
    var P_K_x: dimensionless {pub: out};
    var K_H: molar {init: 1e20, pub: out};
    var K_Mg: molar {init: 1e20, pub: out};
    var K_K: molar {init: 1e20, pub: out};
    P_K_x = 1{dimensionless};
  enddef;

  def comp J_pdh as
    var J_pdh: mole_per_second_per_l_mito_volume {pub: out};
    var PYR_x: molar {pub: in};
    var COASH_x: molar {pub: in};
    var NAD_x: molar {pub: in};
    var CO2_tot_x: molar {pub: in};
    var ACCOA_x: molar {pub: in};
    var NADH_x: molar {pub: in};
    var H_x: molar {pub: in};
    var P_CO2_tot_x: dimensionless {pub: in};
    var P_ACCOA_x: dimensionless {pub: in};
    var P_NADH_x: dimensionless {pub: in};
    var P_PYR_x: dimensionless {pub: in};
    var P_COASH_x: dimensionless {pub: in};
    var P_NAD_x: dimensionless {pub: in};
    var V_mf: mole_per_second_per_l_mito_volume {pub: in};
    var K_eq_pdh: dimensionless;
    var K0_eq_pdh: molar;
    var dGr0_pdh: kilojoule_per_mole;
    var RT: kilojoule_per_mole {pub: in};
    var K_mA: molar {init: 38.3e-6};
    var K_mB: molar {init: 9.9e-6};
    var K_mC: molar {init: 60.7e-6};
    var alpha_i1: dimensionless;
    var alpha_i2: dimensionless;
    var K_iACCOA: molar {init: 40.2e-6};
    var K_iNADH: molar {init: 40e-6};
    var minCon: molar {init: 1e-32};
    var dGf1_CO2_tot: kilojoule_per_mole {pub: in};
    var dGf1_ACCOA: kilojoule_per_mole {pub: in};
    var dGf1_NADH: kilojoule_per_mole {pub: in};
    var dGf1_PYR: kilojoule_per_mole {pub: in};
    var dGf1_COASH: kilojoule_per_mole {pub: in};
    var dGf1_NAD: kilojoule_per_mole {pub: in};
    var dGf1_H2O: kilojoule_per_mole {pub: in};
    dGr0_pdh = dGf1_CO2_tot+dGf1_ACCOA+dGf1_NADH-dGf1_PYR-dGf1_COASH-dGf1_NAD-dGf1_H2O;
    K0_eq_pdh = 1{molar}*exp(-dGr0_pdh/RT);
    K_eq_pdh = K0_eq_pdh*P_CO2_tot_x*P_ACCOA_x*P_NADH_x/(H_x*P_PYR_x*P_COASH_x*P_NAD_x);
    alpha_i1 = 1{dimensionless}+ACCOA_x/K_iACCOA;
    alpha_i2 = 1{dimensionless}+NADH_x/K_iNADH;
    J_pdh = sel
      case (PYR_x > minCon) and (COASH_x > minCon) and (NAD_x > minCon):
        V_mf*(PYR_x*COASH_x*NAD_x-CO2_tot_x*ACCOA_x*NADH_x/K_eq_pdh)/(K_mC*alpha_i2*PYR_x*COASH_x+K_mB*alpha_i1*PYR_x*NAD_x+K_mA*COASH_x*NAD_x+PYR_x*COASH_x*NAD_x);
      otherwise:
        0{mole_per_second_per_l_mito_volume};
    endsel;
  enddef;

  def comp J_cits as
    var J_cits: mole_per_second_per_l_mito_volume {pub: out};
    var OAA_x: molar {pub: in};
    var ACCOA_x: molar {pub: in};
    var COASH_x: molar {pub: in};
    var CIT_x: molar {pub: in};
    var ATP_x: molar {pub: in};
    var ADP_x: molar {pub: in};
    var AMP_x: molar {pub: in};
    var SCOA_x: molar {pub: in};
    var H_x: molar {pub: in};
    var uATP_x: molar {pub: in};
    var uADP_x: molar {pub: in};
    var uAMP_x: molar {pub: in};
    var uCIT_x: molar {pub: in};
    var P_CIT_x: dimensionless {pub: in};
    var P_COASH_x: dimensionless {pub: in};
    var P_ACCOA_x: dimensionless {pub: in};
    var P_OAA_x: dimensionless {pub: in};
    var V_mf: mole_per_second_per_l_mito_volume {pub: in};
    var K_eq_cits: dimensionless;
    var K0_eq_cits: molar_squared;
    var dGr0_cits: kilojoule_per_mole;
    var RT: kilojoule_per_mole {pub: in};
    var K_mA: molar {init: 4e-6};
    var K_mB: molar {init: 14e-6};
    var K_ia: molar {init: 3.33e-6};
    var K_iCIT: molar {init: 1600e-6};
    var K_iATP: molar {init: 900e-6};
    var K_iADP: molar {init: 1800e-6};
    var K_iAMP: molar {init: 6000e-6};
    var K_iCOASH: molar {init: 67e-6};
    var K_iSCOA: molar {init: 140e-6};
    var alpha_i1: dimensionless;
    var alpha_i2: dimensionless;
    var dGf1_ACCOA: kilojoule_per_mole {pub: in};
    var dGf1_COASH: kilojoule_per_mole {pub: in};
    var dGf1_CIT: kilojoule_per_mole {pub: in};
    var dGf1_OAA: kilojoule_per_mole {pub: in};
    var dGf1_H2O: kilojoule_per_mole {pub: in};
    dGr0_cits = dGf1_COASH+dGf1_CIT-dGf1_ACCOA-dGf1_OAA-dGf1_H2O;
    K0_eq_cits = 1{molar_squared}*exp(-dGr0_cits/RT);
    K_eq_cits = K0_eq_cits*P_CIT_x*P_COASH_x/(sqr(H_x)*P_ACCOA_x*P_OAA_x);
    alpha_i1 = 1{dimensionless}+uCIT_x/K_iCIT;
    alpha_i2 = 1{dimensionless}+uATP_x/K_iATP+uADP_x/K_iADP+uAMP_x/K_iAMP+COASH_x/K_iCOASH+SCOA_x/K_iSCOA;
    J_cits = V_mf*(ACCOA_x*OAA_x-COASH_x*CIT_x/K_eq_cits)/(K_ia*K_mB*alpha_i1+K_mA*alpha_i1*ACCOA_x+K_mB*alpha_i2*OAA_x+OAA_x*ACCOA_x);
  enddef;

  def comp J_acon as
    var J_acon: mole_per_second_per_l_mito_volume {pub: out};
    var CIT_x: molar {pub: in};
    var ICIT_x: molar {pub: in};
    var P_CIT_x: dimensionless {pub: in};
    var P_ICIT_x: dimensionless {pub: in};
    var V_mf: mole_per_second_per_l_mito_volume {pub: in};
    var V_mr: mole_per_second_per_l_mito_volume;
    var K_eq_acon: dimensionless;
    var K0_eq_acon: dimensionless;
    var dGr0_acon: kilojoule_per_mole;
    var RT: kilojoule_per_mole {pub: in};
    var K_mA: molar {init: 1161e-6};
    var K_mP: molar {init: 434e-6};
    var dGf1_ICIT: kilojoule_per_mole {pub: in};
    var dGf1_CIT: kilojoule_per_mole {pub: in};
    dGr0_acon = dGf1_ICIT-dGf1_CIT;
    K0_eq_acon = exp(-dGr0_acon/RT);
    K_eq_acon = K0_eq_acon*P_ICIT_x/P_CIT_x;
    V_mr = V_mf*K_mP/(K_mA*K_eq_acon);
    J_acon = V_mf*V_mr*(CIT_x-ICIT_x/K_eq_acon)/(K_mA*V_mr+V_mr*CIT_x+V_mf*ICIT_x/K_eq_acon);
  enddef;

  def comp J_isod as
    var J_isod: mole_per_second_per_l_mito_volume {pub: out};
    var NAD_x: molar {pub: in};
    var ICIT_x: molar {pub: in};
    var AKG_x: molar {pub: in};
    var NADH_x: molar {pub: in};
    var CO2_tot_x: molar {pub: in};
    var fATP_x: molar {pub: in};
    var fADP_x: molar {pub: in};
    var H_x: molar {pub: in};
    var P_CO2_tot_x: dimensionless {pub: in};
    var P_AKG_x: dimensionless {pub: in};
    var P_NADH_x: dimensionless {pub: in};
    var P_NAD_x: dimensionless {pub: in};
    var P_ICIT_x: dimensionless {pub: in};
    var V_mf: mole_per_second_per_l_mito_volume {pub: in};
    var K_eq_isod: molar;
    var K0_eq_isod: molar_cubed;
    var dGr0_isod: kilojoule_per_mole;
    var K_mA: molar {init: 74e-6};
    var K_mB: molar {init: 183e-6};
    var K_ib: molar {init: 23.8e-6};
    var K_iq: molar {init: 29e-6};
    var alpha_i: dimensionless;
    var n_H: dimensionless {init: 3};
    var K_iATP: molar {init: 91e-6};
    var K_aADP: molar {init: 50e-6};
    var minCon: molar {init: 1e-32};
    var RT: kilojoule_per_mole {pub: in};
    var dGf1_AKG: kilojoule_per_mole {pub: in};
    var dGf1_NADH: kilojoule_per_mole {pub: in};
    var dGf1_CO2_tot: kilojoule_per_mole {pub: in};
    var dGf1_ICIT: kilojoule_per_mole {pub: in};
    var dGf1_NAD: kilojoule_per_mole {pub: in};
    var dGf1_H2O: kilojoule_per_mole {pub: in};
    dGr0_isod = dGf1_AKG+dGf1_NADH+dGf1_CO2_tot-dGf1_ICIT-dGf1_NAD-dGf1_H2O;
    K0_eq_isod = 1{molar_cubed}*exp(-dGr0_isod/RT);
    K_eq_isod = K0_eq_isod*P_CO2_tot_x*P_AKG_x*P_NADH_x/(sqr(H_x)*P_NAD_x*P_ICIT_x);
    alpha_i = 1{dimensionless}+K_aADP/fADP_x*(1{dimensionless}+fATP_x/K_iATP);
    J_isod = sel
      case (NAD_x > minCon) and (ICIT_x > minCon):
        V_mf*(1{dimensionless}-CO2_tot_x*AKG_x*NADH_x/(K_eq_isod*NAD_x*ICIT_x))/(1{dimensionless}+pow(K_mB/ICIT_x, n_H)*alpha_i+K_mA/NAD_x*(1{dimensionless}+pow(K_ib/ICIT_x, n_H)*alpha_i+NADH_x*alpha_i/K_iq));
      otherwise:
        0{mole_per_second_per_l_mito_volume};
    endsel;
  enddef;

  def comp J_akgd as
    var J_akgd: mole_per_second_per_l_mito_volume {pub: out};
    var AKG_x: molar {pub: in};
    var COASH_x: molar {pub: in};
    var NAD_x: molar {pub: in};
    var CO2_tot_x: molar {pub: in};
    var SCOA_x: molar {pub: in};
    var NADH_x: molar {pub: in};
    var H_x: molar {pub: in};
    var fATP_x: molar {pub: in};
    var fADP_x: molar {pub: in};
    var P_CO2_tot_x: dimensionless {pub: in};
    var P_SCOA_x: dimensionless {pub: in};
    var P_NADH_x: dimensionless {pub: in};
    var P_AKG_x: dimensionless {pub: in};
    var P_COASH_x: dimensionless {pub: in};
    var P_NAD_x: dimensionless {pub: in};
    var V_mf: mole_per_second_per_l_mito_volume {pub: in};
    var K_eq_akgd: dimensionless;
    var K0_eq_akgd: molar;
    var dGr0_akgd: kilojoule_per_mole;
    var K_mA: molar {init: 80e-6};
    var K_mB: molar {init: 55e-6};
    var K_mC: molar {init: 21e-6};
    var K_iq: molar {init: 6.9e-6};
    var K_ir1: molar {init: 6.010527470838273e-7};
    var K_ir2: molar {init: 1e3};
    var K_iATP: molar {init: 50e-6};
    var K_aADP: molar {init: 100e-6};
    var alpha_i: dimensionless;
    var minCon: molar {init: 1e-32};
    var RT: kilojoule_per_mole {pub: in};
    var dGf1_CO2_tot: kilojoule_per_mole {pub: in};
    var dGf1_SCOA: kilojoule_per_mole {pub: in};
    var dGf1_NADH: kilojoule_per_mole {pub: in};
    var dGf1_AKG: kilojoule_per_mole {pub: in};
    var dGf1_COASH: kilojoule_per_mole {pub: in};
    var dGf1_NAD: kilojoule_per_mole {pub: in};
    var dGf1_H2O: kilojoule_per_mole {pub: in};
    dGr0_akgd = dGf1_CO2_tot+dGf1_SCOA+dGf1_NADH-dGf1_AKG-dGf1_COASH-dGf1_NAD-dGf1_H2O;
    K0_eq_akgd = 1{molar}*exp(-dGr0_akgd/RT);
    K_eq_akgd = K0_eq_akgd*P_CO2_tot_x*P_SCOA_x*P_NADH_x/(H_x*P_COASH_x*P_AKG_x*P_NAD_x);
    alpha_i = 1{dimensionless}+K_aADP/fADP_x*(1{dimensionless}+fATP_x/K_iATP);
    J_akgd = sel
      case (AKG_x > minCon) and (COASH_x > minCon) and (NAD_x > minCon):
        V_mf*(1{dimensionless}-CO2_tot_x*SCOA_x*NADH_x/(K_eq_akgd*AKG_x*COASH_x*NAD_x))/(1{dimensionless}+K_mA/AKG_x*alpha_i+K_mB/COASH_x*(1{dimensionless}+SCOA_x/K_iq)+K_mC/NAD_x*(1{dimensionless}+NADH_x/K_ir1))/(1{dimensionless}+NADH_x/K_ir2);
      otherwise:
        0{mole_per_second_per_l_mito_volume};
    endsel;
  enddef;

  def comp J_scoas as
    var J_scoas: mole_per_second_per_l_mito_volume {pub: out};
    var GDP_x: molar {pub: in};
    var SCOA_x: molar {pub: in};
    var PI_x: molar {pub: in};
    var COASH_x: molar {pub: in};
    var SUC_x: molar {pub: in};
    var GTP_x: molar {pub: in};
    var H_x: molar {pub: in};
    var P_COASH_x: dimensionless {pub: in};
    var P_SUC_x: dimensionless {pub: in};
    var P_GTP_x: dimensionless {pub: in};
    var P_GDP_x: dimensionless {pub: in};
    var P_SCOA_x: dimensionless {pub: in};
    var P_PI_x: dimensionless {pub: in};
    var K_eq_scoas: dimensionless;
    var K0_eq_scoas: molar;
    var dGr0_scoas: kilojoule_per_mole;
    var V_mr: mole_per_second_per_l_mito_volume;
    var V_mf: mole_per_second_per_l_mito_volume {pub: in};
    var K_ia: molar {init: 5.5e-6};
    var K_ib: molar {init: 100e-6};
    var K_ic: molar {init: 2000e-6};
    var K_ip: molar {init: 20e-6};
    var K_iq: molar {init: 3000e-6};
    var K_ir: molar {init: 11.1e-6};
    var K_mA: molar {init: 16e-6};
    var K_mB: molar {init: 55e-6};
    var K_mC: molar {init: 660e-6};
    var K_mP: molar {init: 20e-6};
    var K_mQ: molar {init: 880e-6};
    var K_mR: molar {init: 11.1e-6};
    var RT: kilojoule_per_mole {pub: in};
    var dGf1_COASH: kilojoule_per_mole {pub: in};
    var dGf1_SUC: kilojoule_per_mole {pub: in};
    var dGf1_GTP: kilojoule_per_mole {pub: in};
    var dGf1_GDP: kilojoule_per_mole {pub: in};
    var dGf1_SCOA: kilojoule_per_mole {pub: in};
    var dGf1_Pi: kilojoule_per_mole {pub: in};
    dGr0_scoas = dGf1_COASH+dGf1_SUC+dGf1_GTP-dGf1_GDP-dGf1_SCOA-dGf1_Pi;
    K0_eq_scoas = 1{molar}*exp(-dGr0_scoas/RT);
    K_eq_scoas = K0_eq_scoas*P_COASH_x*P_SUC_x*P_GTP_x/(H_x*P_GDP_x*P_SCOA_x*P_PI_x);
    V_mr = V_mf*K_mP*K_iq*K_ir/(K_eq_scoas*K_ia*K_ib*K_mC);
    J_scoas = V_mf*V_mr*(GDP_x*SCOA_x*PI_x-COASH_x*SUC_x*GTP_x/K_eq_scoas)/(V_mr*K_ia*K_ib*K_mC+V_mr*K_ib*K_mC*GDP_x+V_mr*K_ia*K_mB*PI_x+V_mr*K_mC*GDP_x*SCOA_x+V_mr*K_mB*GDP_x*PI_x+V_mr*K_mA*SCOA_x*PI_x+V_mr*GDP_x*SCOA_x*PI_x+V_mf*K_ir*K_mQ*COASH_x/K_eq_scoas+V_mf*K_iq*K_mP*GTP_x/K_eq_scoas+V_mf*K_mR*COASH_x*SUC_x/K_eq_scoas+V_mf*K_mQ*COASH_x*GTP_x/K_eq_scoas+V_mf*K_mP*SUC_x*GTP_x/K_eq_scoas+V_mf*COASH_x*SUC_x*GTP_x/K_eq_scoas+V_mf*K_mQ*K_ir*GDP_x*COASH_x/(K_ia*K_eq_scoas)+V_mr*K_ia*K_mB*PI_x*GTP_x/K_ir+V_mf*K_mQ*K_ir*GDP_x*SCOA_x*COASH_x/(K_ia*K_ib*K_eq_scoas)+V_mr*K_mA*SCOA_x*PI_x*GTP_x/K_ir+V_mf*K_mR*GDP_x*COASH_x*SUC_x/(K_ia*K_eq_scoas)+V_mr*K_ia*K_mB*PI_x*SUC_x*GTP_x/(K_iq*K_ir)+V_mf*K_ir*K_mQ*GDP_x*SCOA_x*PI_x*COASH_x/(K_ia*K_ib*K_ic*K_eq_scoas)+V_mf*K_ip*K_mR*GDP_x*SCOA_x*PI_x*SUC_x/(K_ia*K_ib*K_ic*K_eq_scoas)+V_mf*K_mR*GDP_x*SCOA_x*COASH_x*SUC_x/(K_ia*K_ib*K_eq_scoas)+V_mr*K_mA*SCOA_x*PI_x*SUC_x*GTP_x/(K_iq*K_ir)+V_mr*K_mA*K_ic*SCOA_x*COASH_x*SUC_x*GTP_x/(K_ip*K_iq*K_ir)+V_mr*K_ia*K_mB*PI_x*COASH_x*SUC_x*GTP_x/(K_ip*K_iq*K_ir)+V_mf*K_mR*GDP_x*SCOA_x*PI_x*COASH_x*SUC_x/(K_ia*K_ib*K_ic*K_eq_scoas)+V_mr*K_mA*SCOA_x*PI_x*COASH_x*SUC_x*GTP_x/(K_ip*K_iq*K_ir));
  enddef;

  def comp J_sdh as
    var J_sdh: mole_per_second_per_l_mito_volume {pub: out};
    var SUC_x: molar {pub: in};
    var COQ_x: molar {pub: in};
    var QH2_x: molar {pub: in};
    var FUM_x: molar {pub: in};
    var OAA_x: molar {pub: in};
    var P_FUM_x: dimensionless {pub: in};
    var P_QH2_x: dimensionless {pub: in};
    var P_COQ_x: dimensionless {pub: in};
    var P_SUC_x: dimensionless {pub: in};
    var K_eq_sdh: dimensionless;
    var K0_eq_sdh: dimensionless;
    var dGr0_sdh: kilojoule_per_mole;
    var V_mr: mole_per_second_per_l_mito_volume;
    var V_mf: mole_per_second_per_l_mito_volume {pub: in};
    var K_ia: molar {init: 120e-6};
    var K_iq: molar {init: 1275e-6};
    var K_mSUC: molar {init: 467e-6};
    var K_mCOQ: molar {init: 480e-6};
    var K_mQH2: molar {init: 2.45e-6};
    var K_mFUM: molar {init: 1200e-6};
    var alpha_i: dimensionless;
    var K_iOAA: molar {init: 1.5e-6};
    var K_aSUC: molar {init: 450e-6};
    var K_aFUM: molar {init: 375e-6};
    var RT: kilojoule_per_mole {pub: in};
    var dGf1_QH2: kilojoule_per_mole {pub: in};
    var dGf1_FUM: kilojoule_per_mole {pub: in};
    var dGf1_SUC: kilojoule_per_mole {pub: in};
    var dGf1_COQ: kilojoule_per_mole {pub: in};
    dGr0_sdh = dGf1_QH2+dGf1_FUM-dGf1_SUC-dGf1_COQ;
    K0_eq_sdh = exp(-dGr0_sdh/RT);
    K_eq_sdh = K0_eq_sdh*P_FUM_x*P_QH2_x/(P_SUC_x*P_COQ_x);
    V_mr = V_mf*K_mQH2*K_iq/(K_eq_sdh*K_ia*K_mCOQ);
    alpha_i = (1{dimensionless}+OAA_x/K_iOAA+SUC_x/K_aSUC+FUM_x/K_aFUM)/(1{dimensionless}+SUC_x/K_aSUC+FUM_x/K_aFUM);
    J_sdh = V_mf*V_mr*(SUC_x*COQ_x-QH2_x*FUM_x/K_eq_sdh)/(V_mr*K_ia*K_mCOQ*alpha_i+V_mr*K_mCOQ*SUC_x+V_mr*K_mSUC*alpha_i*COQ_x+V_mf*K_mFUM*alpha_i*QH2_x/K_eq_sdh+V_mf*K_mQH2*FUM_x/K_eq_sdh+V_mr*SUC_x*COQ_x+V_mf*K_mFUM*SUC_x*QH2_x/(K_eq_sdh*K_ia)+V_mr*K_mSUC*COQ_x*FUM_x/K_iq+V_mf*QH2_x*FUM_x/K_eq_sdh);
  enddef;

  def comp J_fum as
    var J_fum: mole_per_second_per_l_mito_volume {pub: out};
    var FUM_x: molar {pub: in};
    var MAL_x: molar {pub: in};
    var CIT_x: molar {pub: in};
    var fATP_x: molar {pub: in};
    var fADP_x: molar {pub: in};
    var fGTP_x: molar {pub: in};
    var fGDP_x: molar {pub: in};
    var P_MAL_x: dimensionless {pub: in};
    var P_FUM_x: dimensionless {pub: in};
    var K_eq_fum: dimensionless;
    var K0_eq_fum: dimensionless;
    var dGr0_fum: kilojoule_per_mole;
    var V_mf: mole_per_second_per_l_mito_volume {pub: in};
    var V_mr: mole_per_second_per_l_mito_volume;
    var K_mFUM: molar {init: 44.7e-6};
    var K_mMAL: molar {init: 197.7e-6};
    var alpha_i: dimensionless;
    var K_iCIT: molar {init: 3500e-6};
    var K_iATP: molar {init: 40e-6};
    var K_iADP: molar {init: 400e-6};
    var K_iGTP: molar {init: 80e-6};
    var K_iGDP: molar {init: 330e-6};
    var RT: kilojoule_per_mole {pub: in};
    var dGf1_MAL: kilojoule_per_mole {pub: in};
    var dGf1_FUM: kilojoule_per_mole {pub: in};
    var dGf1_H2O: kilojoule_per_mole {pub: in};
    dGr0_fum = dGf1_MAL-dGf1_FUM-dGf1_H2O;
    K0_eq_fum = exp(-dGr0_fum/RT);
    K_eq_fum = K0_eq_fum*P_MAL_x/P_FUM_x;
    V_mr = V_mf*K_mMAL/(K_eq_fum*K_mFUM);
    alpha_i = 1{dimensionless}+CIT_x/K_iCIT+fATP_x/K_iATP+fADP_x/K_iADP+fGTP_x/K_iGTP+fGDP_x/K_iGDP;
    J_fum = V_mr*V_mf*(FUM_x-MAL_x/K_eq_fum)/(K_mFUM*V_mr*alpha_i+V_mr*FUM_x+V_mf*MAL_x/K_eq_fum);
  enddef;

  def comp J_mdh as
    var J_mdh: mole_per_second_per_l_mito_volume {pub: out};
    var NAD_x: molar {pub: in};
    var MAL_x: molar {pub: in};
    var OAA_x: molar {pub: in};
    var NADH_x: molar {pub: in};
    var H_x: molar {pub: in};
    var fATP_x: molar {pub: in};
    var fADP_x: molar {pub: in};
    var fAMP_x: molar {pub: in};
    var P_OAA_x: dimensionless {pub: in};
    var P_NADH_x: dimensionless {pub: in};
    var P_MAL_x: dimensionless {pub: in};
    var P_NAD_x: dimensionless {pub: in};
    var K_eq_mdh: dimensionless;
    var K0_eq_mdh: molar;
    var dGr0_mdh: kilojoule_per_mole;
    var V_mr: mole_per_second_per_l_mito_volume;
    var V_mf: mole_per_second_per_l_mito_volume {pub: in};
    var K_ia: molar {init: 279e-6};
    var K_ib: molar {init: 360e-6};
    var K_ip: molar {init: 5.5e-6};
    var K_iq: molar {init: 3.18e-6};
    var K_mNAD: molar {init: 90.55e-6};
    var K_mMAL: molar {init: 250e-6};
    var K_mOAA: molar {init: 6.128e-6};
    var K_mNADH: molar {init: 2.58e-6};
    var alpha_i: dimensionless;
    var K_iATP: molar {init: 183.2e-6};
    var K_iADP: molar {init: 394.4e-6};
    var K_iAMP: molar {init: 420e-6};
    var RT: kilojoule_per_mole {pub: in};
    var dGf1_OAA: kilojoule_per_mole {pub: in};
    var dGf1_NADH: kilojoule_per_mole {pub: in};
    var dGf1_NAD: kilojoule_per_mole {pub: in};
    var dGf1_MAL: kilojoule_per_mole {pub: in};
    dGr0_mdh = dGf1_OAA+dGf1_NADH-dGf1_NAD-dGf1_MAL;
    K0_eq_mdh = 1{molar}*exp(-dGr0_mdh/RT);
    K_eq_mdh = K0_eq_mdh*P_OAA_x*P_NADH_x/(H_x*P_MAL_x*P_NAD_x);
    V_mr = V_mf*K_iq*K_mOAA/(K_eq_mdh*K_ia*K_mMAL);
    alpha_i = 1{dimensionless}+fATP_x/K_iATP+fADP_x/K_iADP+fAMP_x/K_iAMP;
    J_mdh = V_mf*V_mr*(NAD_x*MAL_x-OAA_x*NADH_x/K_eq_mdh)/(V_mr*K_ia*K_mMAL*alpha_i+V_mr*K_mMAL*NAD_x+V_mr*K_mNAD*alpha_i*MAL_x+V_mf*K_mNADH*alpha_i*OAA_x/K_eq_mdh+V_mf*K_mOAA*NADH_x/K_eq_mdh+V_mr*NAD_x*MAL_x+V_mf*K_mNADH*NAD_x*OAA_x/(K_eq_mdh*K_ia)+V_mf*OAA_x*NADH_x/K_eq_mdh+V_mr*K_mNAD*MAL_x*NADH_x/K_iq+V_mr*NAD_x*MAL_x*OAA_x/K_ip+V_mf*MAL_x*OAA_x*NADH_x/(K_ib*K_eq_mdh));
  enddef;

  def comp J_ndk as
    var J_ndk_f: mole_per_second_per_l_mito_volume {pub: out};
    var J_ndk: mole_per_second_per_l_mito_volume {pub: out};
    var GTP_x: molar {pub: in};
    var ADP_x: molar {pub: in};
    var GDP_x: molar {pub: in};
    var ATP_x: molar {pub: in};
    var fAMP_x: molar {pub: in};
    var K_eq_ndk: dimensionless;
    var K0_eq_ndk: dimensionless;
    var dGr0_ndk: kilojoule_per_mole;
    var V_mr: mole_per_second_per_l_mito_volume;
    var V_mf: mole_per_second_per_l_mito_volume {pub: in};
    var P_GTP_x: dimensionless {pub: in};
    var P_ATP_x: dimensionless {pub: in};
    var P_GDP_x: dimensionless {pub: in};
    var P_ADP_x: dimensionless {pub: in};
    var K_ia: molar {init: 170e-6};
    var K_ib: molar {init: 143.6e-6};
    var K_ip: molar {init: 146.6e-6};
    var K_iq: molar {init: 156.5e-6};
    var K_mA: molar {init: 111e-6};
    var K_mB: molar {init: 100e-6};
    var K_mP: molar {init: 260e-6};
    var K_mQ: molar {init: 278e-6};
    var alpha_i: dimensionless;
    var K_iAMP: molar {init: 650e-6};
    var minCon: molar {init: 1e-32};
    var RT: kilojoule_per_mole {pub: in};
    var dGf1_GDP: kilojoule_per_mole {pub: in};
    var dGf1_ATP: kilojoule_per_mole {pub: in};
    var dGf1_GTP: kilojoule_per_mole {pub: in};
    var dGf1_ADP: kilojoule_per_mole {pub: in};
    dGr0_ndk = dGf1_GDP+dGf1_ATP-dGf1_GTP-dGf1_ADP;
    K0_eq_ndk = exp(-dGr0_ndk/RT);
    K_eq_ndk = K0_eq_ndk*P_GDP_x*P_ATP_x/(P_GTP_x*P_ADP_x);
    V_mr = V_mf*K_mQ*K_ip/(K_eq_ndk*K_ia*K_mB);
    alpha_i = 1{dimensionless}+fAMP_x/K_iAMP;
    J_ndk_f = sel
      case (GTP_x > minCon) and (ADP_x > minCon):
        V_mf*V_mr/alpha_i*GTP_x*ADP_x/(V_mr*K_mB*GTP_x+V_mr*K_mA*ADP_x+V_mf*K_mQ*GDP_x/K_eq_ndk+V_mf*K_mP*ATP_x/K_eq_ndk+V_mr*GTP_x*ADP_x+V_mf*K_mQ*GTP_x*GDP_x/(K_eq_ndk*K_ia)+V_mf*GDP_x*ATP_x/K_eq_ndk+V_mr*K_mA*ADP_x*ATP_x/K_iq);
      otherwise:
        0{mole_per_second_per_l_mito_volume};
    endsel;
    J_ndk = sel
      case (GDP_x > minCon) and (ATP_x > minCon):
        J_ndk_f-V_mf*V_mr/alpha_i*GDP_x*ATP_x/K_eq_ndk/(V_mr*K_mB*GTP_x+V_mr*K_mA*ADP_x+V_mf*K_mQ*GDP_x/K_eq_ndk+V_mf*K_mP*ATP_x/K_eq_ndk+V_mr*GTP_x*ADP_x+V_mf*K_mQ*GTP_x*GDP_x/(K_eq_ndk*K_ia)+V_mf*GDP_x*ATP_x/K_eq_ndk+V_mr*K_mA*ADP_x*ATP_x/K_iq);
      otherwise:
        J_ndk_f;
    endsel;
  enddef;

  def comp J_got as
    var J_got_f: mole_per_second_per_l_mito_volume {pub: out};
    var J_got: mole_per_second_per_l_mito_volume {pub: out};
    var ASP_x: molar {pub: in};
    var AKG_x: molar {pub: in};
    var OAA_x: molar {pub: in};
    var GLU_x: molar {pub: in};
    var P_OAA_x: dimensionless {pub: in};
    var P_ASP_x: dimensionless {pub: in};
    var P_GLU_x: dimensionless {pub: in};
    var P_AKG_x: dimensionless {pub: in};
    var K_eq_got: dimensionless;
    var K0_eq_got: dimensionless;
    var dGr0_got: kilojoule_per_mole;
    var V_mr: mole_per_second_per_l_mito_volume;
    var V_mf: mole_per_second_per_l_mito_volume {pub: in};
    var K_ia: molar {init: 3480e-6};
    var K_ib: molar {init: 710e-6};
    var K_ip: molar {init: 50e-6};
    var K_iq: molar {init: 8400e-6};
    var K_mA: molar {init: 3900e-6};
    var K_mB: molar {init: 430e-6};
    var K_mP: molar {init: 88e-6};
    var K_mQ: molar {init: 8900e-6};
    var alpha_i: dimensionless;
    var K_iAKG: molar {init: 16.6e-3};
    var minCon: molar {init: 1e-32};
    var RT: kilojoule_per_mole {pub: in};
    var dGf1_OAA: kilojoule_per_mole {pub: in};
    var dGf1_GLU: kilojoule_per_mole {pub: in};
    var dGf1_ASP: kilojoule_per_mole {pub: in};
    var dGf1_AKG: kilojoule_per_mole {pub: in};
    dGr0_got = dGf1_OAA+dGf1_GLU-dGf1_ASP-dGf1_AKG;
    K0_eq_got = exp(-dGr0_got/RT);
    K_eq_got = K0_eq_got*P_GLU_x*P_OAA_x/(P_ASP_x*P_AKG_x);
    V_mr = V_mf*K_mQ*K_ip/(K_eq_got*K_ia*K_mB);
    alpha_i = 1{dimensionless}+AKG_x/K_iAKG;
    J_got_f = sel
      case (ASP_x > minCon) and (AKG_x > minCon):
        V_mf*V_mr*ASP_x*AKG_x/(V_mr*K_mB*ASP_x+V_mr*K_mA*alpha_i*AKG_x+V_mf*K_mQ*alpha_i*OAA_x/K_eq_got+V_mf*K_mP*GLU_x/K_eq_got+V_mr*ASP_x*AKG_x+V_mf*K_mQ*ASP_x*OAA_x/(K_eq_got*K_ia)+V_mf*OAA_x*GLU_x/K_eq_got+V_mr*K_mA*AKG_x*GLU_x/K_iq);
      otherwise:
        0{mole_per_second_per_l_mito_volume};
    endsel;
    J_got = sel
      case (OAA_x > minCon) and (GLU_x > minCon):
        J_got_f-V_mf*V_mr*OAA_x*GLU_x/K_eq_got/(V_mr*K_mB*ASP_x+V_mr*K_mA*alpha_i*AKG_x+V_mf*K_mQ*alpha_i*OAA_x/K_eq_got+V_mf*K_mP*GLU_x/K_eq_got+V_mr*ASP_x*AKG_x+V_mf*K_mQ*ASP_x*OAA_x/(K_eq_got*K_ia)+V_mf*OAA_x*GLU_x/K_eq_got+V_mr*K_mA*AKG_x*GLU_x/K_iq);
      otherwise:
        J_got_f;
    endsel;
  enddef;

  def comp J_PYRH as
    var J_PYRH: mole_per_second_per_l_mito_volume {pub: out};
    var X_PYRH: mole_per_second_per_l_mito_volume_per_molar_per_molar {pub: in};
    var PYR_i: molar {pub: in};
    var H_i: molar {pub: in};
    var P_PYR_i: dimensionless {pub: in};
    var PYR_x: molar {pub: in};
    var H_x: molar {pub: in};
    var P_PYR_x: dimensionless {pub: in};
    J_PYRH = X_PYRH*(PYR_i/P_PYR_i*H_i-PYR_x/P_PYR_x*H_x);
  enddef;

  def comp J_GLUH as
    var J_GLUH: mole_per_second_per_l_mito_volume {pub: out};
    var X_GLUH: mole_per_second_per_l_mito_volume_per_molar_per_molar {pub: in};
    var GLU_i: molar {pub: in};
    var H_i: molar {pub: in};
    var P_GLU_i: dimensionless {pub: in};
    var GLU_x: molar {pub: in};
    var H_x: molar {pub: in};
    var P_GLU_x: dimensionless {pub: in};
    J_GLUH = X_GLUH*(GLU_i/P_GLU_i*H_i-GLU_x/P_GLU_x*H_x);
  enddef;

  def comp J_CITMAL as
    var J_CITMAL: mole_per_second_per_l_mito_volume {pub: out};
    var X_CITMAL: mole_per_second_per_l_mito_volume_per_molar_per_molar {pub: in};
    var hCIT_i: molar {pub: in};
    var MAL_i: molar {pub: in};
    var P_MAL_i: dimensionless {pub: in};
    var hCIT_x: molar {pub: in};
    var MAL_x: molar {pub: in};
    var P_MAL_x: dimensionless {pub: in};
    J_CITMAL = X_CITMAL*(hCIT_i*MAL_x/P_MAL_x-hCIT_x*MAL_i/P_MAL_i);
  enddef;

  def comp J_AKGMAL as
    var J_AKGMAL: mole_per_second_per_l_mito_volume {pub: out};
    var X_AKGMAL: mole_per_second_per_l_mito_volume {pub: in};
    var K_mAKGi: molar {init: 0.3e-3};
    var K_mAKGx: molar {init: 0.17e-3};
    var K_mMALi: molar {init: 1.4e-3};
    var K_mMALx: molar {init: 0.7e-3};
    var AKG_i: molar {pub: in};
    var MAL_i: molar {pub: in};
    var AKG_x: molar {pub: in};
    var MAL_x: molar {pub: in};
    J_AKGMAL = X_AKGMAL*(AKG_i*MAL_x-AKG_x*MAL_i)/(K_mAKGi*K_mMALx*(2{dimensionless}+MAL_i/K_mMALi+MAL_x/K_mMALx+AKG_i/K_mAKGi+AKG_x/K_mAKGx+MAL_i*AKG_x/(K_mMALi*K_mAKGx)+MAL_x*AKG_i/(K_mMALx*K_mAKGi)));
  enddef;

  def comp J_MALPI as
    var J_MALPI: mole_per_second_per_l_mito_volume {pub: out};
    var X_MALPI: mole_per_second_per_l_mito_volume_per_molar_per_molar {pub: in};
    var PI_i: molar {pub: in};
    var P_PI_i: dimensionless {pub: in};
    var MAL_i: molar {pub: in};
    var P_MAL_i: dimensionless {pub: in};
    var PI_x: molar {pub: in};
    var P_PI_x: dimensionless {pub: in};
    var MAL_x: molar {pub: in};
    var P_MAL_x: dimensionless {pub: in};
    J_MALPI = X_MALPI*(MAL_i/P_MAL_i*PI_x/P_PI_x-MAL_x/P_MAL_x*PI_i/P_PI_i);
  enddef;

  def comp J_ASPGLU as
    var J_ASPGLU: mole_per_second_per_l_mito_volume {pub: out};
    var X_ASPGLU: mole_per_second_per_l_mito_volume {pub: in};
    var K_eqASPGLU: dimensionless;
    var K_hASPGLU: molar;
    var K_iASPi: molar {init: 28e-6};
    var K_iASPx: molar {init: 2.8e-3};
    var K_iGLUi: molar {init: 180e-6};
    var K_iGLUx: molar {init: 1.6e-3};
    var ASP_i: molar {pub: in};
    var GLU_i: molar {pub: in};
    var H_i: molar {pub: in};
    var ASP_x: molar {pub: in};
    var GLU_x: molar {pub: in};
    var H_x: molar {pub: in};
    var m: dimensionless {init: 1.8};
    var pKa_ASPGLU: dimensionless {init: 6.5};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var dPsi: millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var P_ASP_x: dimensionless {pub: in};
    var P_ASP_i: dimensionless {pub: in};
    var P_GLU_x: dimensionless {pub: in};
    var P_GLU_i: dimensionless {pub: in};
    K_eqASPGLU = exp(-F*dPsi/RT)*P_ASP_x*P_GLU_i/(P_ASP_i*P_GLU_x);
    K_hASPGLU = 1{molar}*pow(10{dimensionless}, -pKa_ASPGLU);
    J_ASPGLU = X_ASPGLU*(K_eqASPGLU*ASP_i*GLU_x*H_x-ASP_x*GLU_i*H_i)/(K_eqASPGLU*K_iASPi*K_iGLUx*K_hASPGLU*(2{dimensionless}*m+m*ASP_i/K_iASPi+ASP_i*GLU_x*H_x/(K_iASPi*K_iGLUx*K_hASPGLU)+m*ASP_x*H_i/(K_iASPx*K_hASPGLU)+ASP_x*GLU_i*H_i/(K_iASPx*K_iGLUi*K_hASPGLU)+m*ASP_x/K_iASPx+m*ASP_i*H_x/(K_iASPi*K_hASPGLU)+m*H_x/K_hASPGLU+m*GLU_i*H_i/(K_iGLUi*K_hASPGLU)+m*H_i/K_hASPGLU+m*GLU_x*H_x/(K_iGLUx*K_hASPGLU)));
  enddef;

  def comp J_SUCMAL as
    var J_SUCMAL: mole_per_second_per_l_mito_volume {pub: out};
    var X_SUCMAL: mole_per_second_per_l_mito_volume_per_molar_per_molar {pub: in};
    var SUC_i: molar {pub: in};
    var P_SUC_i: dimensionless {pub: in};
    var MAL_i: molar {pub: in};
    var P_MAL_i: dimensionless {pub: in};
    var SUC_x: molar {pub: in};
    var P_SUC_x: dimensionless {pub: in};
    var MAL_x: molar {pub: in};
    var P_MAL_x: dimensionless {pub: in};
    J_SUCMAL = X_SUCMAL*(SUC_i/P_SUC_i*MAL_x/P_MAL_x-SUC_x/P_SUC_x*MAL_i/P_MAL_i);
  enddef;

  def comp J_PYRt as
    var J_PYRt: mole_per_second_per_l_mito_volume {pub: out};
    var gamma: per_micrometer {pub: in};
    var p_TI: micrometer_per_second {pub: in};
    var PYR_c: molar {pub: in};
    var PYR_i: molar {pub: in};
    J_PYRt = gamma*p_TI*(PYR_c-PYR_i);
  enddef;

  def comp J_CITt as
    var J_CITt: mole_per_second_per_l_mito_volume {pub: out};
    var gamma: per_micrometer {pub: in};
    var p_TI: micrometer_per_second {pub: in};
    var CIT_c: molar {pub: in};
    var CIT_i: molar {pub: in};
    J_CITt = gamma*p_TI*(CIT_c-CIT_i);
  enddef;

  def comp J_MALt as
    var J_MALt: mole_per_second_per_l_mito_volume {pub: out};
    var gamma: per_micrometer {pub: in};
    var p_TI: micrometer_per_second {pub: in};
    var MAL_c: molar {pub: in};
    var MAL_i: molar {pub: in};
    J_MALt = gamma*p_TI*(MAL_c-MAL_i);
  enddef;

  def comp J_AKGt as
    var J_AKGt: mole_per_second_per_l_mito_volume {pub: out};
    var gamma: per_micrometer {pub: in};
    var p_TI: micrometer_per_second {pub: in};
    var AKG_c: molar {pub: in};
    var AKG_i: molar {pub: in};
    J_AKGt = gamma*p_TI*(AKG_c-AKG_i);
  enddef;

  def comp J_SUCt as
    var J_SUCt: mole_per_second_per_l_mito_volume {pub: out};
    var gamma: per_micrometer {pub: in};
    var p_TI: micrometer_per_second {pub: in};
    var SUC_c: molar {pub: in};
    var SUC_i: molar {pub: in};
    J_SUCt = gamma*p_TI*(SUC_c-SUC_i);
  enddef;

  def comp J_GLUt as
    var J_GLUt: mole_per_second_per_l_mito_volume {pub: out};
    var gamma: per_micrometer {pub: in};
    var p_TI: micrometer_per_second {pub: in};
    var GLU_c: molar {pub: in};
    var GLU_i: molar {pub: in};
    J_GLUt = gamma*p_TI*(GLU_c-GLU_i);
  enddef;

  def comp J_ASPt as
    var J_ASPt: mole_per_second_per_l_mito_volume {pub: out};
    var gamma: per_micrometer {pub: in};
    var p_TI: micrometer_per_second {pub: in};
    var ASP_c: molar {pub: in};
    var ASP_i: molar {pub: in};
    J_ASPt = gamma*p_TI*(ASP_c-ASP_i);
  enddef;

  def comp J_FUMt as
    var J_FUMt: mole_per_second_per_l_mito_volume {pub: out};
    var gamma: per_micrometer {pub: in};
    var zero: micrometer_per_second {init: 0};
    var FUM_c: molar {pub: in};
    var FUM_i: molar {pub: in};
    J_FUMt = gamma*zero*(FUM_c-FUM_i);
  enddef;

  def comp J_ICITt as
    var J_ICITt: mole_per_second_per_l_mito_volume {pub: out};
    var gamma: per_micrometer {pub: in};
    var p_TI: micrometer_per_second {pub: in};
    var ICIT_c: molar {pub: in};
    var ICIT_i: molar {pub: in};
    J_ICITt = gamma*p_TI*(ICIT_c-ICIT_i);
  enddef;

  def comp J_ADPt as
    var J_ADPt: mole_per_second_per_l_mito_volume {pub: out};
    var gamma: per_micrometer {pub: in};
    var p_A: micrometer_per_second {pub: in};
    var ADP_c: molar {pub: in};
    var ADP_i: molar {pub: in};
    J_ADPt = gamma*p_A*(ADP_c-ADP_i);
  enddef;

  def comp J_ATPt as
    var J_ATPt: mole_per_second_per_l_mito_volume {pub: out};
    var gamma: per_micrometer {pub: in};
    var p_A: micrometer_per_second {pub: in};
    var ATP_c: molar {pub: in};
    var ATP_i: molar {pub: in};
    J_ATPt = gamma*p_A*(ATP_c-ATP_i);
  enddef;

  def comp J_AMPt as
    var J_AMPt: mole_per_second_per_l_mito_volume {pub: out};
    var gamma: per_micrometer {pub: in};
    var p_A: micrometer_per_second {pub: in};
    var AMP_c: molar {pub: in};
    var AMP_i: molar {pub: in};
    J_AMPt = gamma*p_A*(AMP_c-AMP_i);
  enddef;

  def comp J_PIt as
    var J_PIt: mole_per_second_per_l_mito_volume {pub: out};
    var gamma: per_micrometer {pub: in};
    var p_PI: micrometer_per_second {pub: in};
    var PI_c: molar {pub: in};
    var PI_i: molar {pub: in};
    J_PIt = gamma*p_PI*(PI_c-PI_i);
  enddef;

  def comp J_C1 as
    var J_C1: mole_per_second_per_l_mito_volume {pub: out};
    var X_C1: mole_per_second_per_l_mito_volume_per_molar_per_molar {pub: in};
    var dGr0_C1: kilojoule_per_mole;
    var K_eq_C1: per_molar;
    var K_app_C1: dimensionless;
    var H_x: molar {pub: in};
    var H_i: molar {pub: in};
    var dPsi: millivolt {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var NAD_x: molar {pub: in};
    var NADH_x: molar {pub: in};
    var QH2_x: molar {pub: in};
    var COQ_x: molar {pub: in};
    var dGf1_NAD: kilojoule_per_mole {pub: in};
    var dGf1_QH2: kilojoule_per_mole {pub: in};
    var dGf1_NADH: kilojoule_per_mole {pub: in};
    var dGf1_COQ: kilojoule_per_mole {pub: in};
    dGr0_C1 = dGf1_NAD+dGf1_QH2-dGf1_NADH-dGf1_COQ;
    K_eq_C1 = 1{per_molar}*exp(-(dGr0_C1+4{dimensionless}*F*dPsi)/RT);
    K_app_C1 = K_eq_C1*pow(H_x, 5{dimensionless})/pow(H_i, 4{dimensionless});
    J_C1 = X_C1*(K_app_C1*NADH_x*COQ_x-NAD_x*QH2_x);
  enddef;

  def comp J_C3 as
    var J_C3: mole_per_second_per_l_mito_volume {pub: out};
    var X_C3: mole_per_second_per_l_mito_volume_per_molar_per_half_molar {pub: in};
    var k_PI_1: molar {pub: in};
    var k_PI_2: molar {pub: in};
    var dGr0_C3: kilojoule_per_mole;
    var K_eq_C3: molar_squared;
    var K_app_C3: dimensionless;
    var H_x: molar {pub: in};
    var H_i: molar {pub: in};
    var dPsi: millivolt {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var PI_x: molar {pub: in};
    var QH2_x: molar;
    var QH2_x_in: molar {pub: in};
    var COQ_x: molar;
    var COQ_x_in: molar {pub: in};
    var Cred_i: molar {pub: in};
    var Cox_i: molar {pub: in};
    var minCon: molar {init: 1e-32};
    var dGf1_COQ: kilojoule_per_mole {pub: in};
    var dGf1_Cred: kilojoule_per_mole {pub: in};
    var dGf1_QH2: kilojoule_per_mole {pub: in};
    var dGf1_Cox: kilojoule_per_mole {pub: in};
    dGr0_C3 = dGf1_COQ+2{dimensionless}*dGf1_Cred-dGf1_QH2-2{dimensionless}*dGf1_Cox;
    K_eq_C3 = 1{molar_squared}*exp(-(dGr0_C3+2{dimensionless}*F*dPsi)/RT);
    K_app_C3 = K_eq_C3*sqr(H_x)/pow(H_x, 4{dimensionless});
    QH2_x = sel
      case QH2_x_in > minCon:
        QH2_x_in;
      otherwise:
        minCon;
    endsel;
    COQ_x = sel
      case COQ_x_in > minCon:
        COQ_x_in;
      otherwise:
        minCon;
    endsel;
    J_C3 = X_C3*(1{dimensionless}+PI_x/k_PI_1)/(1{dimensionless}+PI_x/k_PI_2)*(sqrt(K_app_C3)*Cox_i*sqrt(QH2_x)-Cred_i*sqrt(COQ_x));
  enddef;

  def comp J_C4 as
    var J_C4: mole_per_second_per_l_mito_volume {pub: out};
    var X_C4: mole_per_second_per_l_mito_volume_per_molar {pub: in};
    var dGr0_C4: kilojoule_per_mole;
    var K_eq_C4: dimensionless;
    var K_app_C4: dimensionless;
    var H_x: molar {pub: in};
    var H_i: molar {pub: in};
    var dPsi: millivolt {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var O2_x: molar;
    var O2_x_in: molar {pub: in};
    var k_O2: molar {pub: in};
    var cytC_tot: molar {pub: in};
    var Cred_i: molar {pub: in};
    var Cox_i: molar {pub: in};
    var minCon: molar {init: 1e-32};
    var dGf1_Cox: kilojoule_per_mole {pub: in};
    var dGf1_H2O: kilojoule_per_mole {pub: in};
    var dGf1_Cred: kilojoule_per_mole {pub: in};
    var dGf1_O2: kilojoule_per_mole {pub: in};
    dGr0_C4 = 2{dimensionless}*dGf1_Cox+dGf1_H2O-2{dimensionless}*dGf1_Cred-0.5{dimensionless}*dGf1_O2;
    K_eq_C4 = exp(-(dGr0_C4+4{dimensionless}*F*dPsi)/RT);
    K_app_C4 = K_eq_C4*pow(H_x, 4{dimensionless})/(sqr(H_i)*sqr(1{molar}));
    O2_x = sel
      case O2_x_in > minCon:
        O2_x_in;
      otherwise:
        minCon;
    endsel;
    J_C4 = X_C4*(O2_x/(O2_x+k_O2)*exp(F*dPsi/RT)*(Cred_i/cytC_tot))*(pow(K_app_C4, 1{dimensionless}/2{dimensionless})*Cred_i*pow(O2_x/1{molar}, 1{dimensionless}/4{dimensionless})-Cox_i);
  enddef;

  def comp J_F1 as
    var J_F1: mole_per_second_per_l_mito_volume {pub: out};
    var X_F1: mole_per_second_per_l_mito_volume_per_molar {pub: in};
    var dGr0_F1: kilojoule_per_mole;
    var K_eq_F1: per_molar_squared;
    var K_app_F1: per_molar;
    var H_x: molar {priv: out, pub: in};
    var H_i: molar {priv: out, pub: in};
    var P_ATP_x: dimensionless {priv: out, pub: in};
    var P_ADP_x: dimensionless {priv: out, pub: in};
    var P_PI_x: dimensionless {priv: out, pub: in};
    var dPsi: millivolt {priv: out, pub: in};
    var F: kilojoule_per_mole_per_millivolt {priv: out, pub: in};
    var RT: kilojoule_per_mole {priv: out, pub: in};
    var n_A: dimensionless {priv: out, pub: in};
    var ATP_x: molar {pub: in};
    var ADP_x: molar {pub: in};
    var PI_x: molar {pub: in};
    var dGf1_ATP: kilojoule_per_mole {pub: in};
    var dGf1_H2O: kilojoule_per_mole {pub: in};
    var dGf1_ADP: kilojoule_per_mole {pub: in};
    var dGf1_PI: kilojoule_per_mole {pub: in};
    dGr0_F1 = dGf1_ATP+dGf1_H2O-dGf1_ADP-dGf1_PI;
    K_eq_F1 = exp(-(dGr0_F1-n_A*F*dPsi)/RT)/1{molar_squared};
    K_app_F1 = K_eq_F1*pow(H_i, n_A)/pow(H_x, n_A-1{dimensionless})*P_ATP_x/(P_ADP_x*P_PI_x);
    J_F1 = X_F1*(K_app_F1*ADP_x*PI_x-ATP_x);
  enddef;

  def comp J_ANT as
    var J_ANT: mole_per_second_per_l_mito_volume {pub: out};
    var theta: dimensionless {pub: in};
    var X_ANT: mole_per_second_per_l_mito_volume {pub: in};
    var k_mADP: molar {pub: in};
    var ADP_i: molar {pub: in};
    var P_ADP_i: dimensionless {pub: in};
    var ATP_i: molar {pub: in};
    var P_ATP_i: dimensionless {pub: in};
    var ADP_x: molar {pub: in};
    var P_ADP_x: dimensionless {pub: in};
    var ATP_x: molar {pub: in};
    var P_ATP_x: dimensionless {pub: in};
    var dPsi: millivolt {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var minCond: molar {init: 1e-9};
    J_ANT = sel
      case (ADP_i > minCond) and (ATP_x > minCond):
        X_ANT*(ADP_i/P_ADP_i/(ADP_i/P_ADP_i+ATP_i/P_ATP_i*exp(theta*F*dPsi/RT))-ADP_x/P_ADP_x/(ADP_x/P_ADP_x+ATP_x/P_ATP_x*exp(theta*(F-1{kilojoule_per_mole_per_millivolt})*dPsi/RT)))*(ADP_i/P_ADP_i/(ADP_i/P_ADP_i+k_mADP));
      otherwise:
        0{mole_per_second_per_l_mito_volume};
    endsel;
  enddef;

  def comp J_PIHt as
    var J_PIHt: mole_per_second_per_l_mito_volume {pub: out};
    var X_PIHt: mole_per_second_per_l_mito_volume_per_molar {pub: in};
    var k_PIHt: molar {pub: in};
    var hPI_i: molar {pub: in};
    var H_i: molar {pub: in};
    var hPI_x: molar {pub: in};
    var H_x: molar {pub: in};
    J_PIHt = X_PIHt*(hPI_i*H_i-hPI_x*H_x)/(k_PIHt*(1{dimensionless}+hPI_i/k_PIHt)*(1{dimensionless}+hPI_x/k_PIHt));
  enddef;

  def comp J_Hle as
    var J_Hle: mole_per_second_per_l_mito_volume {pub: out};
    var X_Hle: mole_per_second_per_l_mito_volume_per_molar_per_mv {pub: in};
    var dPsi: millivolt {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var n_A: dimensionless {pub: in};
    var H_i: molar {pub: in};
    var H_x: molar {pub: in};
    var minCond: millivolt {init: 1e-9};
    J_Hle = sel
      case abs(dPsi) > minCond:
        X_Hle*dPsi*(H_i*exp(F*dPsi/RT)-H_x)/(exp(F*dPsi/RT)-1{dimensionless});
      otherwise:
        X_Hle*RT*(H_i-H_x)/F;
    endsel;
  enddef;

  def comp J_KH as
    var J_KH: mole_per_second_per_l_mito_volume {pub: out};
    var X_KH: mole_per_second_per_l_mito_volume_per_molar_per_molar {pub: in};
    var K_i: molar {pub: in};
    var H_i: molar {pub: in};
    var K_x: molar {pub: in};
    var H_x: molar {pub: in};
    J_KH = X_KH*(K_i*H_x-K_x*H_i);
  enddef;

  def comp J_HK as
    var J_HK: mole_per_second_per_l_cyto_volume {pub: out};
    var X_HK: mole_per_second_per_l_cyto_volume {pub: in};
    var dGr0_HK: kilojoule_per_mole;
    var mATP_c: molar {pub: in};
    var mADP_c: molar {pub: in};
    var GLC_c: molar {pub: in};
    var G6P_c: molar {pub: in};
    var H_c: molar {pub: in};
    var K_ia: molar {init: 1e-3};
    var K_ib: molar {init: 47e-6};
    var K_ip: molar {init: 47e-6};
    var K_iq: molar {init: 1e-3};
    var K_mA: molar {init: 1e-3};
    var K_mB: molar {init: 47e-6};
    var K_mP: molar {init: 47e-6};
    var K_mQ: molar {init: 1e-3};
    var Ki_G6P: molar {init: 10e-6};
    var RT: kilojoule_per_mole {pub: in};
    var P_ATP_c: dimensionless {pub: in};
    var P_ADP_c: dimensionless {pub: in};
    var P_G6P_c: dimensionless {pub: in};
    var P_GLC_c: dimensionless {pub: in};
    var KMg_ATP: molar {pub: in};
    var KMg_ADP: molar {pub: in};
    var K_eq_HK: molar;
    var Kapp_HK: dimensionless;
    var Kapp_HK_m: dimensionless;
    var dGf1_G6P: kilojoule_per_mole {pub: in};
    var dGf1_ADP: kilojoule_per_mole {pub: in};
    var dGf1_GLC: kilojoule_per_mole {pub: in};
    var dGf1_ATP: kilojoule_per_mole {pub: in};
    dGr0_HK = dGf1_G6P+dGf1_ADP-dGf1_GLC-dGf1_ATP;
    K_eq_HK = 1{molar}*exp(-dGr0_HK/RT);
    Kapp_HK = K_eq_HK*P_G6P_c*P_ADP_c/(H_c*P_ATP_c*P_GLC_c);
    Kapp_HK_m = Kapp_HK*KMg_ATP*P_ATP_c/(KMg_ADP*P_ADP_c);
    J_HK = X_HK/(K_ib*K_mA)*(mATP_c*GLC_c-G6P_c*mADP_c/Kapp_HK_m)/(1{dimensionless}+mATP_c/K_ia+GLC_c/K_ib+mATP_c*GLC_c/(K_ib*K_mA)+G6P_c/K_ip+mADP_c/K_iq+G6P_c*mADP_c/(K_iq*K_mP)+G6P_c*GLC_c/(Ki_G6P*K_ib));
  enddef;

  def comp J_CKc as
    var J_CKc: mole_per_second_per_l_cyto_volume {pub: out};
    var X_CK: mole_per_second_per_l_cyto_volume_per_molar_per_molar {init: 1e7};
    var K_CK: per_molar;
    var ATP_c: molar {pub: in};
    var ADP_c: molar {pub: in};
    var AMP_c: molar {pub: in};
    var H_c: molar {pub: in};
    var PCr_c: molar {pub: in};
    var Cr_c: molar;
    var CR_tot: molar {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var P_ATP_c: dimensionless {pub: in};
    var P_ADP_c: dimensionless {pub: in};
    var ExpType: dimensionless {pub: in};
    Cr_c = CR_tot-PCr_c;
    K_CK = exp(50.78{kilojoule_per_mole}/RT)/1{molar};
    J_CKc = sel
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 5{dimensionless}):
        0{mole_per_second_per_l_cyto_volume};
      otherwise:
        X_CK*(K_CK*ADP_c/P_ADP_c*PCr_c*H_c-ATP_c/P_ATP_c*Cr_c);
    endsel;
  enddef;

  def comp J_AK as
    var J_AKi: mole_per_second_per_l_mito_volume {pub: out};
    var J_AKc: mole_per_second_per_l_mito_volume {pub: out};
    var X_AK: mole_per_second_per_l_mito_volume_per_molar_per_molar {init: 1e7};
    var dGr0_AK: kilojoule_per_mole;
    var K_eq_AK: dimensionless;
    var Kapp_AKi: dimensionless;
    var Kapp_AKc: dimensionless;
    var ATP_i: molar {pub: in};
    var ADP_i: molar {pub: in};
    var AMP_i: molar {pub: in};
    var P_ATP_i: dimensionless {pub: in};
    var P_ADP_i: dimensionless {pub: in};
    var P_AMP_i: dimensionless {pub: in};
    var ATP_c: molar {pub: in};
    var ADP_c: molar {pub: in};
    var AMP_c: molar {pub: in};
    var P_ATP_c: dimensionless {pub: in};
    var P_ADP_c: dimensionless {pub: in};
    var P_AMP_c: dimensionless {pub: in};
    var ExpType: dimensionless {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var dGf1_ATP: kilojoule_per_mole {pub: in};
    var dGf1_ADP: kilojoule_per_mole {pub: in};
    var dGf1_AMP: kilojoule_per_mole {pub: in};
    dGr0_AK = dGf1_ATP+dGf1_AMP-2{dimensionless}*dGf1_ADP;
    K_eq_AK = exp(-dGr0_AK/RT);
    Kapp_AKi = K_eq_AK*P_ATP_i*P_AMP_i/(P_ADP_i*P_ADP_i);
    Kapp_AKc = K_eq_AK*P_ATP_c*P_AMP_c/(P_ADP_c*P_ADP_c);
    J_AKi = sel
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 5{dimensionless}):
        0{mole_per_second_per_l_mito_volume};
      otherwise:
        X_AK*(Kapp_AKi*ADP_i*ADP_i-AMP_i*ATP_i);
    endsel;
    J_AKc = sel
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 5{dimensionless}):
        0{mole_per_second_per_l_mito_volume};
      otherwise:
        X_AK*(Kapp_AKc*ADP_c*ADP_c-AMP_c*ATP_c);
    endsel;
  enddef;

  def comp ddPsi_dt as
    var dPsi: millivolt {init: -14.087, pub: out};
    var time: second {pub: in};
    var C_IM: mole_per_l_mito_volume_per_mv {pub: in};
    var J_C1: mole_per_second_per_l_mito_volume {pub: in};
    var J_C3: mole_per_second_per_l_mito_volume {pub: in};
    var J_C4: mole_per_second_per_l_mito_volume {pub: in};
    var J_F1: mole_per_second_per_l_mito_volume {pub: in};
    var J_ANT: mole_per_second_per_l_mito_volume {pub: in};
    var J_Hle: mole_per_second_per_l_mito_volume {pub: in};
    var J_ASPGLU: mole_per_second_per_l_mito_volume {pub: in};
    var n_A: dimensionless {pub: in};
    ode(dPsi, time) = (4{dimensionless}*J_C1+2{dimensionless}*J_C3+4{dimensionless}*J_C4-n_A*J_F1-J_ANT-J_Hle+J_ASPGLU)/C_IM;
  enddef;

  def comp dNAD_x_dt as
    var NAD_x: molar {pub: out};
    var dNAD_x_dt: molar_per_second {pub: out};
    var NAD_tot: molar {pub: in};
    var NADH_x: molar {pub: in};
    var dNADH_x_dt: molar_per_second {pub: in};
    NAD_x = NAD_tot-NADH_x;
    dNAD_x_dt = -dNADH_x_dt;
  enddef;

  def comp dCOQ_x_dt as
    var COQ_x: molar {pub: out};
    var dCOQ_x_dt: molar_per_second {pub: out};
    var Q_tot: molar {pub: in};
    var QH2_x: molar {pub: in};
    var dQH2_x_dt: molar_per_second {pub: in};
    COQ_x = Q_tot-QH2_x;
    dCOQ_x_dt = -dQH2_x_dt;
  enddef;

  def comp dCox_i_dt as
    var Cox_i: molar {pub: out};
    var cytC_tot: molar {pub: in};
    var Cred_i: molar {pub: in};
    Cox_i = cytC_tot-Cred_i;
  enddef;

  def comp dATP_x_dt as
    var ATP_x: molar {init: 1.025e-11, pub: out};
    var dATP_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_ndk: mole_per_second_per_l_mito_volume {pub: in};
    var J_F1: mole_per_second_per_l_mito_volume {pub: in};
    var J_ANT: mole_per_second_per_l_mito_volume {pub: in};
    ode(ATP_x, time) = (J_ndk+J_F1-J_ANT)/W_x;
    dATP_x_dt = (J_ndk+J_F1-J_ANT)/W_x;
  enddef;

  def comp dADP_x_dt as
    var ADP_x: molar {init: 0.01, pub: out};
    var dADP_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_ndk: mole_per_second_per_l_mito_volume {pub: in};
    var J_F1: mole_per_second_per_l_mito_volume {pub: in};
    var J_ANT: mole_per_second_per_l_mito_volume {pub: in};
    ode(ADP_x, time) = (-J_ndk-J_F1+J_ANT)/W_x;
    dADP_x_dt = (-J_ndk-J_F1+J_ANT)/W_x;
  enddef;

  def comp dAMP_x_dt as
    var AMP_x: molar {init: 1e-6, pub: out};
    var dAMP_x_dt: molar_per_second {init: 0, pub: out};
    var time: second {pub: in};
    ode(AMP_x, time) = 0{molar_per_second};
  enddef;

  def comp dGTP_x_dt as
    var GTP_x: molar {init: 2.7157e-10, pub: out};
    var dGTP_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_ndk: mole_per_second_per_l_mito_volume {pub: in};
    var J_scoas: mole_per_second_per_l_mito_volume {pub: in};
    ode(GTP_x, time) = (J_scoas-J_ndk)/W_x;
    dGTP_x_dt = (J_scoas-J_ndk)/W_x;
  enddef;

  def comp dGDP_x_dt as
    var GDP_x: molar {init: 0.005, pub: out};
    var dGDP_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_ndk: mole_per_second_per_l_mito_volume {pub: in};
    var J_scoas: mole_per_second_per_l_mito_volume {pub: in};
    ode(GDP_x, time) = (-J_scoas+J_ndk)/W_x;
    dGDP_x_dt = (-J_scoas+J_ndk)/W_x;
  enddef;

  def comp dPI_x_dt as
    var PI_x: molar {init: 2.9918e-4, pub: out};
    var dPI_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_F1: mole_per_second_per_l_mito_volume {pub: in};
    var J_scoas: mole_per_second_per_l_mito_volume {pub: in};
    var J_PIHt: mole_per_second_per_l_mito_volume {pub: in};
    var J_MALPI: mole_per_second_per_l_mito_volume {pub: in};
    ode(PI_x, time) = (-J_scoas-J_F1+J_PIHt-J_MALPI)/W_x;
    dPI_x_dt = (-J_scoas-J_F1+J_PIHt-J_MALPI)/W_x;
  enddef;

  def comp dNADH_x_dt as
    var NADH_x: molar {init: 8.484200000000001e-21, pub: out};
    var dNADH_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_pdh: mole_per_second_per_l_mito_volume {pub: in};
    var J_isod: mole_per_second_per_l_mito_volume {pub: in};
    var J_akgd: mole_per_second_per_l_mito_volume {pub: in};
    var J_mdh: mole_per_second_per_l_mito_volume {pub: in};
    var J_C1: mole_per_second_per_l_mito_volume {pub: in};
    ode(NADH_x, time) = (J_pdh+J_isod+J_akgd+J_mdh-J_C1)/W_x;
    dNADH_x_dt = (J_pdh+J_isod+J_akgd+J_mdh-J_C1)/W_x;
  enddef;

  def comp dQH2_x_dt as
    var QH2_x: molar {init: 0, pub: out};
    var dQH2_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_sdh: mole_per_second_per_l_mito_volume {pub: in};
    var J_C1: mole_per_second_per_l_mito_volume {pub: in};
    var J_C3: mole_per_second_per_l_mito_volume {pub: in};
    ode(QH2_x, time) = (J_sdh+J_C1-J_C3)/W_x;
    dQH2_x_dt = (J_sdh+J_C1-J_C3)/W_x;
  enddef;

  def comp dPYR_x_dt as
    var PYR_x: molar {init: 1.2076e-11, pub: out};
    var dPYR_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_pdh: mole_per_second_per_l_mito_volume {pub: in};
    var J_PYRH: mole_per_second_per_l_mito_volume {pub: in};
    ode(PYR_x, time) = (-J_pdh+J_PYRH)/W_x;
    dPYR_x_dt = (-J_pdh+J_PYRH)/W_x;
  enddef;

  def comp dACCOA_x_dt as
    var ACCOA_x: molar {init: 2.5507e-12, pub: out};
    var dACCOA_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_pdh: mole_per_second_per_l_mito_volume {pub: in};
    var J_cits: mole_per_second_per_l_mito_volume {pub: in};
    ode(ACCOA_x, time) = (J_pdh-J_cits)/W_x;
    dACCOA_x_dt = (J_pdh-J_cits)/W_x;
  enddef;

  def comp dCIT_x_dt as
    var CIT_x: molar {init: 6.815100000000001e-5, pub: out};
    var dCIT_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_acon: mole_per_second_per_l_mito_volume {pub: in};
    var J_cits: mole_per_second_per_l_mito_volume {pub: in};
    var J_CITMAL: mole_per_second_per_l_mito_volume {pub: in};
    ode(CIT_x, time) = (-J_acon+J_CITMAL+J_cits)/W_x;
    dCIT_x_dt = (-J_acon+J_CITMAL+J_cits)/W_x;
  enddef;

  def comp dICIT_x_dt as
    var ICIT_x: molar {init: 9.3558e-7, pub: out};
    var dICIT_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_acon: mole_per_second_per_l_mito_volume {pub: in};
    var J_isod: mole_per_second_per_l_mito_volume {pub: in};
    ode(ICIT_x, time) = (J_acon-J_isod)/W_x;
    dICIT_x_dt = (J_acon-J_isod)/W_x;
  enddef;

  def comp dAKG_x_dt as
    var AKG_x: molar {init: 4.7979e-11, pub: out};
    var dAKG_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_isod: mole_per_second_per_l_mito_volume {pub: in};
    var J_akgd: mole_per_second_per_l_mito_volume {pub: in};
    var J_got: mole_per_second_per_l_mito_volume {pub: in};
    var J_AKGMAL: mole_per_second_per_l_mito_volume {pub: in};
    ode(AKG_x, time) = (J_isod-J_akgd-J_got+J_AKGMAL)/W_x;
    dAKG_x_dt = (J_isod-J_akgd-J_got+J_AKGMAL)/W_x;
  enddef;

  def comp dSCOA_x_dt as
    var SCOA_x: molar {init: 6.9627e-10, pub: out};
    var dSCOA_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_akgd: mole_per_second_per_l_mito_volume {pub: in};
    var J_scoas: mole_per_second_per_l_mito_volume {pub: in};
    ode(SCOA_x, time) = (J_akgd-J_scoas)/W_x;
    dSCOA_x_dt = (J_akgd-J_scoas)/W_x;
  enddef;

  def comp dCOASH_x_dt as
    var COASH_x: molar {init: 0.0030107, pub: out};
    var dCOASH_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_pdh: mole_per_second_per_l_mito_volume {pub: in};
    var J_akgd: mole_per_second_per_l_mito_volume {pub: in};
    var J_scoas: mole_per_second_per_l_mito_volume {pub: in};
    var J_cits: mole_per_second_per_l_mito_volume {pub: in};
    ode(COASH_x, time) = (-J_pdh-J_akgd+J_scoas+J_cits)/W_x;
    dCOASH_x_dt = (-J_pdh-J_akgd+J_scoas+J_cits)/W_x;
  enddef;

  def comp dSUC_x_dt as
    var SUC_x: molar {init: 2.1681e-7, pub: out};
    var dSUC_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_scoas: mole_per_second_per_l_mito_volume {pub: in};
    var J_sdh: mole_per_second_per_l_mito_volume {pub: in};
    var J_SUCMAL: mole_per_second_per_l_mito_volume {pub: in};
    ode(SUC_x, time) = (J_scoas-J_sdh+J_SUCMAL)/W_x;
    dSUC_x_dt = (J_scoas-J_sdh+J_SUCMAL)/W_x;
  enddef;

  def comp dFUM_x_dt as
    var FUM_x: molar {init: 7.8476e-9, pub: out};
    var dFUM_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_sdh: mole_per_second_per_l_mito_volume {pub: in};
    var J_fum: mole_per_second_per_l_mito_volume {pub: in};
    ode(FUM_x, time) = (J_sdh-J_fum)/W_x;
    dFUM_x_dt = (J_sdh-J_fum)/W_x;
  enddef;

  def comp dMAL_x_dt as
    var MAL_x: molar {init: 3.2191e-8, pub: out};
    var dMAL_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_fum: mole_per_second_per_l_mito_volume {pub: in};
    var J_mdh: mole_per_second_per_l_mito_volume {pub: in};
    var J_MALPI: mole_per_second_per_l_mito_volume {pub: in};
    var J_AKGMAL: mole_per_second_per_l_mito_volume {pub: in};
    var J_CITMAL: mole_per_second_per_l_mito_volume {pub: in};
    var J_SUCMAL: mole_per_second_per_l_mito_volume {pub: in};
    ode(MAL_x, time) = (J_fum-J_mdh+J_MALPI-J_AKGMAL-J_CITMAL-J_SUCMAL)/W_x;
    dMAL_x_dt = (J_fum-J_mdh+J_MALPI-J_AKGMAL-J_CITMAL-J_SUCMAL)/W_x;
  enddef;

  def comp dOAA_x_dt as
    var OAA_x: molar {init: 8.9236e-4, pub: out};
    var dOAA_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_cits: mole_per_second_per_l_mito_volume {pub: in};
    var J_mdh: mole_per_second_per_l_mito_volume {pub: in};
    var J_got: mole_per_second_per_l_mito_volume {pub: in};
    ode(OAA_x, time) = (-J_cits+J_mdh+J_got)/W_x;
    dOAA_x_dt = (-J_cits+J_mdh+J_got)/W_x;
  enddef;

  def comp dGLU_x_dt as
    var GLU_x: molar {init: 9.9311e-12, pub: out};
    var dGLU_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_got: mole_per_second_per_l_mito_volume {pub: in};
    var J_GLUH: mole_per_second_per_l_mito_volume {pub: in};
    var J_ASPGLU: mole_per_second_per_l_mito_volume {pub: in};
    ode(GLU_x, time) = (J_got+J_GLUH-J_ASPGLU)/W_x;
    dGLU_x_dt = (J_got+J_GLUH-J_ASPGLU)/W_x;
  enddef;

  def comp dASP_x_dt as
    var ASP_x: molar {init: 1.0217e-4, pub: out};
    var dASP_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var J_got: mole_per_second_per_l_mito_volume {pub: in};
    var J_ASPGLU: mole_per_second_per_l_mito_volume {pub: in};
    ode(ASP_x, time) = (-J_got+J_ASPGLU)/W_x;
    dASP_x_dt = (-J_got+J_ASPGLU)/W_x;
  enddef;

  def comp dO2_x_dt as
    var O2_x: molar {init: 6.499999999999999e-5, pub: out};
    var dO2_x_dt: molar_per_second {init: 0, pub: out};
    var time: second {pub: in};
    ode(O2_x, time) = 0{molar_per_second};
  enddef;

  def comp dCO2_tot_x_dt as
    var CO2_tot_x: molar {init: 0.0214, pub: out};
    var dCO2_tot_x_dt: molar_per_second {init: 0, pub: out};
    var time: second {pub: in};
    ode(CO2_tot_x, time) = 0{molar_per_second};
  enddef;

  def comp dCred_i_dt as
    var Cred_i: molar {init: 9.6996e-8, pub: out};
    var time: second {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var J_C3: mole_per_second_per_l_mito_volume {pub: in};
    var J_C4: mole_per_second_per_l_mito_volume {pub: in};
    ode(Cred_i, time) = (2{dimensionless}*J_C3-2{dimensionless}*J_C4)/W_i;
  enddef;

  def comp dATP_i_dt as
    var ATP_i: molar {init: 1e-9, pub: out};
    var time: second {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var J_ATPt: mole_per_second_per_l_mito_volume {pub: in};
    var J_ANT: mole_per_second_per_l_mito_volume {pub: in};
    var J_AKi: mole_per_second_per_l_mito_volume {pub: in};
    ode(ATP_i, time) = (J_ATPt+J_ANT+J_AKi)/W_i;
  enddef;

  def comp dADP_i_dt as
    var ADP_i: molar {init: 1e-9, pub: out};
    var time: second {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var J_ADPt: mole_per_second_per_l_mito_volume {pub: in};
    var J_ANT: mole_per_second_per_l_mito_volume {pub: in};
    var J_AKi: mole_per_second_per_l_mito_volume {pub: in};
    ode(ADP_i, time) = (J_ADPt-J_ANT-2{dimensionless}*J_AKi)/W_i;
  enddef;

  def comp dAMP_i_dt as
    var AMP_i: molar {init: 1e-9, pub: out};
    var time: second {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var J_AMPt: mole_per_second_per_l_mito_volume {pub: in};
    var J_AKi: mole_per_second_per_l_mito_volume {pub: in};
    ode(AMP_i, time) = (J_AMPt+J_AKi)/W_i;
  enddef;

  def comp dPI_i_dt as
    var PI_i: molar {init: 1.1574e-4, pub: out};
    var time: second {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var J_PIHt: mole_per_second_per_l_mito_volume {pub: in};
    var J_PIt: mole_per_second_per_l_mito_volume {pub: in};
    var J_MALPI: mole_per_second_per_l_mito_volume {pub: in};
    ode(PI_i, time) = (-J_PIHt+J_PIt+J_MALPI)/W_i;
  enddef;

  def comp dPYR_i_dt as
    var PYR_i: molar {init: 9.1804e-10, pub: out};
    var time: second {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var J_PYRH: mole_per_second_per_l_mito_volume {pub: in};
    var J_PYRt: mole_per_second_per_l_mito_volume {pub: in};
    ode(PYR_i, time) = (-J_PYRH+J_PYRt)/W_i;
  enddef;

  def comp dCIT_i_dt as
    var CIT_i: molar {init: 1e-9, pub: out};
    var time: second {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var J_CITMAL: mole_per_second_per_l_mito_volume {pub: in};
    var J_CITt: mole_per_second_per_l_mito_volume {pub: in};
    ode(CIT_i, time) = (-J_CITMAL+J_CITt)/W_i;
  enddef;

  def comp dICIT_i_dt as
    var ICIT_i: molar {init: 1e-9, pub: out};
    var time: second {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var J_ICITt: mole_per_second_per_l_mito_volume {pub: in};
    ode(ICIT_i, time) = J_ICITt/W_i;
  enddef;

  def comp dAKG_i_dt as
    var AKG_i: molar {init: 9.999500000000001e-10, pub: out};
    var time: second {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var J_AKGMAL: mole_per_second_per_l_mito_volume {pub: in};
    var J_AKGt: mole_per_second_per_l_mito_volume {pub: in};
    ode(AKG_i, time) = (-J_AKGMAL+J_AKGt)/W_i;
  enddef;

  def comp dSUC_i_dt as
    var SUC_i: molar {init: 1e-9, pub: out};
    var time: second {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var J_SUCt: mole_per_second_per_l_mito_volume {pub: in};
    var J_SUCMAL: mole_per_second_per_l_mito_volume {pub: in};
    ode(SUC_i, time) = (J_SUCt-J_SUCMAL)/W_i;
  enddef;

  def comp dFUM_i_dt as
    var FUM_i: molar {init: 1e-9, pub: out};
    var time: second {pub: in};
    var J_FUMt: mole_per_second_per_l_mito_volume {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    ode(FUM_i, time) = J_FUMt/W_i;
  enddef;

  def comp dMAL_i_dt as
    var MAL_i: molar {init: 1e-9, pub: out};
    var time: second {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var J_MALPI: mole_per_second_per_l_mito_volume {pub: in};
    var J_MALt: mole_per_second_per_l_mito_volume {pub: in};
    var J_AKGMAL: mole_per_second_per_l_mito_volume {pub: in};
    var J_CITMAL: mole_per_second_per_l_mito_volume {pub: in};
    var J_SUCMAL: mole_per_second_per_l_mito_volume {pub: in};
    ode(MAL_i, time) = (-J_MALPI+J_MALt+J_AKGMAL+J_CITMAL+J_SUCMAL)/W_i;
  enddef;

  def comp dGLU_i_dt as
    var GLU_i: molar {init: 5.7539e-12, pub: out};
    var time: second {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var J_GLUH: mole_per_second_per_l_mito_volume {pub: in};
    var J_ASPGLU: mole_per_second_per_l_mito_volume {pub: in};
    var J_GLUt: mole_per_second_per_l_mito_volume {pub: in};
    ode(GLU_i, time) = (-J_GLUH+J_ASPGLU+J_GLUt)/W_i;
  enddef;

  def comp dASP_i_dt as
    var ASP_i: molar {init: 4.4404e-9, pub: out};
    var time: second {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var J_ASPGLU: mole_per_second_per_l_mito_volume {pub: in};
    var J_ASPt: mole_per_second_per_l_mito_volume {pub: in};
    ode(ASP_i, time) = (-J_ASPGLU+J_ASPt)/W_i;
  enddef;

  def comp dH_i_dt as
    var H_i: molar {pub: out};
    var H_c: molar {pub: in};
    H_i = H_c;
  enddef;

  def comp dMg_i_dt as
    var Mg_i: molar {pub: out};
    var Mg_c: molar {pub: in};
    Mg_i = Mg_c;
  enddef;

  def comp dK_i_dt as
    var K_i: molar {pub: out};
    var K_c: molar {pub: in};
    K_i = K_c;
  enddef;

  def comp dPYR_c_dt as
    var PYR_c: molar {init: 1e-9, pub: out};
    var Rm_cyto: mito_per_cyto;
    var time: second {pub: in};
    var ExpType: dimensionless {pub: in};
    var StateType: dimensionless {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var V_cyto: cyto_per_cell {pub: in};
    var V_mito: mito_per_cell {pub: in};
    var J_PYRt: mole_per_second_per_l_mito_volume {pub: in};
    Rm_cyto = sel
      case (StateType == 0{dimensionless}) or (ExpType == 3{dimensionless}) or (ExpType == 4{dimensionless}) or (ExpType == 5{dimensionless}):
        0{mito_per_cyto};
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 6{dimensionless}):
        1{mito_per_cyto};
      otherwise:
        V_mito/V_cyto;
    endsel;
    ode(PYR_c, time) = -Rm_cyto*J_PYRt/W_c;
  enddef;

  def comp dCIT_c_dt as
    var CIT_c: molar {init: 1e-9, pub: out};
    var Rm_cyto: mito_per_cyto;
    var time: second {pub: in};
    var ExpType: dimensionless {pub: in};
    var StateType: dimensionless {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var V_cyto: cyto_per_cell {pub: in};
    var V_mito: mito_per_cell {pub: in};
    var J_CITt: mole_per_second_per_l_mito_volume {pub: in};
    Rm_cyto = sel
      case (StateType == 0{dimensionless}) or (ExpType == 5{dimensionless}):
        0{mito_per_cyto};
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 6{dimensionless}):
        1{mito_per_cyto};
      otherwise:
        V_mito/V_cyto;
    endsel;
    ode(CIT_c, time) = -Rm_cyto*J_CITt/W_c;
  enddef;

  def comp dICIT_c_dt as
    var ICIT_c: molar {init: 1e-9, pub: out};
    var Rm_cyto: mito_per_cyto;
    var time: second {pub: in};
    var ExpType: dimensionless {pub: in};
    var StateType: dimensionless {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var V_cyto: cyto_per_cell {pub: in};
    var V_mito: mito_per_cell {pub: in};
    var J_ICITt: mole_per_second_per_l_mito_volume {pub: in};
    Rm_cyto = sel
      case (StateType == 0{dimensionless}) or (ExpType == 5{dimensionless}):
        0{mito_per_cyto};
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 6{dimensionless}):
        1{mito_per_cyto};
      otherwise:
        V_mito/V_cyto;
    endsel;
    ode(ICIT_c, time) = -Rm_cyto*J_ICITt/W_c;
  enddef;

  def comp dAKG_c_dt as
    var AKG_c: molar {init: 1e-9, pub: out};
    var Rm_cyto: mito_per_cyto;
    var time: second {pub: in};
    var ExpType: dimensionless {pub: in};
    var StateType: dimensionless {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var V_cyto: cyto_per_cell {pub: in};
    var V_mito: mito_per_cell {pub: in};
    var J_AKGt: mole_per_second_per_l_mito_volume {pub: in};
    Rm_cyto = sel
      case (StateType == 0{dimensionless}) or (ExpType == 5{dimensionless}):
        0{mito_per_cyto};
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 6{dimensionless}):
        1{mito_per_cyto};
      otherwise:
        V_mito/V_cyto;
    endsel;
    ode(AKG_c, time) = -Rm_cyto*J_AKGt/W_c;
  enddef;

  def comp dSUC_c_dt as
    var SUC_c: molar {init: 1e-9, pub: out};
    var Rm_cyto: mito_per_cyto;
    var time: second {pub: in};
    var ExpType: dimensionless {pub: in};
    var StateType: dimensionless {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var V_cyto: cyto_per_cell {pub: in};
    var V_mito: mito_per_cell {pub: in};
    var J_SUCt: mole_per_second_per_l_mito_volume {pub: in};
    Rm_cyto = sel
      case (StateType == 0{dimensionless}) or (ExpType == 5{dimensionless}):
        0{mito_per_cyto};
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 6{dimensionless}):
        1{mito_per_cyto};
      otherwise:
        V_mito/V_cyto;
    endsel;
    ode(SUC_c, time) = -Rm_cyto*J_SUCt/W_c;
  enddef;

  def comp dFUM_c_dt as
    var FUM_c: molar {init: 1e-9, pub: out};
    var time: second {pub: in};
    var ExpType: dimensionless {pub: in};
    var StateType: dimensionless {pub: in};
    var Rm_cyto: mito_per_cyto;
    var W_c: l_water_per_l_cyto {pub: in};
    var V_cyto: cyto_per_cell {pub: in};
    var V_mito: mito_per_cell {pub: in};
    var J_FUMt: mole_per_second_per_l_mito_volume {pub: in};
    Rm_cyto = sel
      case (StateType == 0{dimensionless}) or (ExpType == 5{dimensionless}):
        0{mito_per_cyto};
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 6{dimensionless}):
        1{mito_per_cyto};
      otherwise:
        V_mito/V_cyto;
    endsel;
    ode(FUM_c, time) = -Rm_cyto*J_FUMt/W_c;
  enddef;

  def comp dMAL_c_dt as
    var MAL_c: molar {init: 1e-9, pub: out};
    var Rm_cyto: mito_per_cyto;
    var time: second {pub: in};
    var ExpType: dimensionless {pub: in};
    var StateType: dimensionless {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var V_cyto: cyto_per_cell {pub: in};
    var V_mito: mito_per_cell {pub: in};
    var J_MALt: mole_per_second_per_l_mito_volume {pub: in};
    Rm_cyto = sel
      case (StateType == 0{dimensionless}) or (ExpType == 5{dimensionless}):
        0{mito_per_cyto};
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 6{dimensionless}):
        1{mito_per_cyto};
      otherwise:
        V_mito/V_cyto;
    endsel;
    ode(MAL_c, time) = -Rm_cyto*J_MALt/W_c;
  enddef;

  def comp dGLU_c_dt as
    var GLU_c: molar {init: 5.754e-12, pub: out};
    var Rm_cyto: mito_per_cyto;
    var time: second {pub: in};
    var ExpType: dimensionless {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var V_cyto: cyto_per_cell {pub: in};
    var V_mito: mito_per_cell {pub: in};
    var J_GLUt: mole_per_second_per_l_mito_volume {pub: in};
    Rm_cyto = sel
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 5{dimensionless}) or (ExpType == 6{dimensionless}):
        1{mito_per_cyto};
      otherwise:
        V_mito/V_cyto;
    endsel;
    ode(GLU_c, time) = -Rm_cyto*J_GLUt/W_c;
  enddef;

  def comp dASP_c_dt as
    var ASP_c: molar {init: 4.4404e-9, pub: out};
    var Rm_cyto: mito_per_cyto;
    var time: second {pub: in};
    var ExpType: dimensionless {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var V_cyto: cyto_per_cell {pub: in};
    var V_mito: mito_per_cell {pub: in};
    var J_ASPt: mole_per_second_per_l_mito_volume {pub: in};
    Rm_cyto = sel
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 5{dimensionless}) or (ExpType == 6{dimensionless}):
        1{mito_per_cyto};
      otherwise:
        V_mito/V_cyto;
    endsel;
    ode(ASP_c, time) = -Rm_cyto*J_ASPt/W_c;
  enddef;

  def comp dH_c_dt as
    var H_c: molar {init: 1e-7, pub: out};
    var time: second {pub: in};
    ode(H_c, time) = 0{molar_per_second};
  enddef;

  def comp dMg_c_dt as
    var Mg_c: molar {init: 0.005, pub: out};
    var time: second {pub: in};
    ode(Mg_c, time) = 0{molar_per_second};
  enddef;

  def comp dK_c_dt as
    var K_c: molar {init: 0.15, pub: out};
    var time: second {pub: in};
    ode(K_c, time) = 0{molar_per_second};
  enddef;

  def comp dPI_c_dt as
    var PI_c: molar {init: 1.1574e-4, pub: out};
    var Rm_cyto: mito_per_cyto;
    var conversion_factor: mito_per_cyto {init: 1};
    var time: second {pub: in};
    var ExpType: dimensionless {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var V_cyto: cyto_per_cell {pub: in};
    var V_mito: mito_per_cell {pub: in};
    var J_AtC: mole_per_second_per_l_cyto_volume {pub: in};
    var J_PIt: mole_per_second_per_l_mito_volume {pub: in};
    Rm_cyto = V_mito/V_cyto;
    ode(PI_c, time) = sel
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 5{dimensionless}) or (ExpType == 6{dimensionless}):
        -J_PIt*conversion_factor/W_c;
      otherwise:
        (Rm_cyto*J_PIt+J_AtC)/W_c;
    endsel;
  enddef;

  def comp dATP_c_dt as
    var ATP_c: molar {init: 1e-9, pub: out};
    var Rm_cyto: mito_per_cyto;
    var conversion_factor: mito_per_cyto {init: 1};
    var time: second {pub: in};
    var ExpType: dimensionless {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var V_cyto: cyto_per_cell {pub: in};
    var V_mito: mito_per_cell {pub: in};
    var J_ATPt: mole_per_second_per_l_mito_volume {pub: in};
    var J_CKc: mole_per_second_per_l_cyto_volume {pub: in};
    var J_AKc: mole_per_second_per_l_mito_volume {pub: in};
    var J_AtC: mole_per_second_per_l_cyto_volume {pub: in};
    var J_HK: mole_per_second_per_l_cyto_volume {pub: in};
    Rm_cyto = V_mito/V_cyto;
    ode(ATP_c, time) = sel
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 5{dimensionless}) or (ExpType == 6{dimensionless}):
        (-(1{dimensionless}+W_c/1{l_water_per_l_cyto})*J_HK-conversion_factor*J_ATPt)/W_c;
      otherwise:
        (-Rm_cyto*J_ATPt+J_CKc+conversion_factor*J_AKc-J_AtC)/W_c;
    endsel;
  enddef;

  def comp dADP_c_dt as
    var ADP_c: molar {init: 1e-9, pub: out};
    var Rm_cyto: mito_per_cyto;
    var conversion_factor: mito_per_cyto {init: 1};
    var time: second {pub: in};
    var ExpType: dimensionless {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var V_cyto: cyto_per_cell {pub: in};
    var V_mito: mito_per_cell {pub: in};
    var J_ADPt: mole_per_second_per_l_mito_volume {pub: in};
    var J_CKc: mole_per_second_per_l_cyto_volume {pub: in};
    var J_AKc: mole_per_second_per_l_mito_volume {pub: in};
    var J_AtC: mole_per_second_per_l_cyto_volume {pub: in};
    var J_HK: mole_per_second_per_l_cyto_volume {pub: in};
    Rm_cyto = V_mito/V_cyto;
    ode(ADP_c, time) = sel
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 5{dimensionless}) or (ExpType == 6{dimensionless}):
        ((1{dimensionless}+W_c/1{l_water_per_l_cyto})*J_HK-conversion_factor*J_ADPt)/W_c;
      otherwise:
        (-Rm_cyto*J_ADPt-J_CKc-2{dimensionless}*conversion_factor*J_AKc+J_AtC)/W_c;
    endsel;
  enddef;

  def comp dGLC_c_dt as
    var GLC_c: molar {init: 1e-9, pub: out};
    var time: second {pub: in};
    var ExpType: dimensionless {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var J_HK: mole_per_second_per_l_cyto_volume {pub: in};
    ode(GLC_c, time) = sel
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 5{dimensionless}) or (ExpType == 6{dimensionless}):
        -(1{dimensionless}+W_c/1{l_water_per_l_cyto})*J_HK/W_c;
      otherwise:
        0{molar_per_second};
    endsel;
  enddef;

  def comp dG6P_c_dt as
    var G6P_c: molar {init: 1e-9, pub: out};
    var time: second {pub: in};
    var ExpType: dimensionless {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var J_HK: mole_per_second_per_l_cyto_volume {pub: in};
    ode(G6P_c, time) = sel
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 5{dimensionless}) or (ExpType == 6{dimensionless}):
        (1{dimensionless}+W_c/1{l_water_per_l_cyto})*J_HK/W_c;
      otherwise:
        0{molar_per_second};
    endsel;
  enddef;

  def comp dPCr_c_dt as
    var PCr_c: molar {init: 1e-9, pub: out};
    var time: second {pub: in};
    var ExpType: dimensionless {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var J_CKc: mole_per_second_per_l_cyto_volume {pub: in};
    ode(PCr_c, time) = sel
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 5{dimensionless}) or (ExpType == 6{dimensionless}):
        0{molar_per_second};
      otherwise:
        -J_CKc/W_c;
    endsel;
  enddef;

  def comp dAMP_c_dt as
    var AMP_c: molar {init: 1e-9, pub: out};
    var Rm_cyto: mito_per_cyto;
    var conversion_factor: mito_per_cyto {init: 1};
    var time: second {pub: in};
    var ExpType: dimensionless {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var V_cyto: cyto_per_cell {pub: in};
    var V_mito: mito_per_cell {pub: in};
    var J_AMPt: mole_per_second_per_l_mito_volume {pub: in};
    var J_AKc: mole_per_second_per_l_mito_volume {pub: in};
    Rm_cyto = V_mito/V_cyto;
    ode(AMP_c, time) = sel
      case (ExpType == 1{dimensionless}) or (ExpType == 2{dimensionless}) or (ExpType == 5{dimensionless}) or (ExpType == 6{dimensionless}):
        0{molar_per_second};
      otherwise:
        (-Rm_cyto*J_AMPt+conversion_factor*J_AKc)/W_c;
    endsel;
  enddef;

  def comp dFAD_x_dt as
    var FAD_x: molar {pub: out};
    var dFAD_x_dt: molar_per_second {init: 0, pub: out};
    var dFADH2_x_dt: molar_per_second {init: 0, pub: out};
    var FADH2_x: molar {pub: out};
    var FAD_tot: molar {pub: in};
    FAD_x = FAD_tot-FADH2_x;
    FADH2_x = FAD_tot/2{dimensionless};
  enddef;

  def comp dH_x_dt as
    var H_x: molar {init: 5.7919e-8, pub: out};
    var dH_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var D: dimensionless {pub: in};
    var phi_H: molar_per_second {pub: in};
    var phi_Mg: molar_per_second {pub: in};
    var phi_K: molar_per_second {pub: in};
    var dHB_dMg: dimensionless {pub: in};
    var dHB_dK: dimensionless {pub: in};
    var dMgB_dK: dimensionless {pub: in};
    var dKB_dMg: dimensionless {pub: in};
    var alpha_K: dimensionless {pub: in};
    var alpha_Mg: dimensionless {pub: in};
    dH_x_dt = 0{molar_per_second};
    ode(H_x, time) = ((dKB_dMg*dMgB_dK-alpha_Mg*alpha_K)*phi_H+(alpha_K*dHB_dMg-dHB_dK*dKB_dMg)*phi_Mg+(alpha_Mg*dHB_dK-dHB_dMg*dMgB_dK)*phi_K)/D;
  enddef;

  def comp dMg_x_dt as
    var Mg_x: molar {init: 0.0046388, pub: out};
    var dMg_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var D: dimensionless {pub: in};
    var alpha_H: dimensionless {pub: in};
    var alpha_K: dimensionless {pub: in};
    var phi_H: molar_per_second {pub: in};
    var phi_Mg: molar_per_second {pub: in};
    var phi_K: molar_per_second {pub: in};
    var dHB_dK: dimensionless {pub: in};
    var dKB_dH: dimensionless {pub: in};
    var dMgB_dK: dimensionless {pub: in};
    var dMgB_dH: dimensionless {pub: in};
    ode(Mg_x, time) = ((alpha_K*dMgB_dH-dKB_dH*dMgB_dK)*phi_H+(dKB_dH*dHB_dK-alpha_H*alpha_K)*phi_Mg+(alpha_H*dMgB_dK-dHB_dK*dMgB_dH)*phi_K)/D;
    dMg_x_dt = 0{molar_per_second};
  enddef;

  def comp dK_x_dt as
    var K_x: molar {init: 0.086878, pub: out};
    var dK_x_dt: molar_per_second {pub: out};
    var time: second {pub: in};
    var D: dimensionless {pub: in};
    var alpha_H: dimensionless {pub: in};
    var alpha_Mg: dimensionless {pub: in};
    var phi_H: molar_per_second {pub: in};
    var phi_Mg: molar_per_second {pub: in};
    var phi_K: molar_per_second {pub: in};
    var dHB_dMg: dimensionless {pub: in};
    var dMgB_dH: dimensionless {pub: in};
    var dKB_dMg: dimensionless {pub: in};
    var dKB_dH: dimensionless {pub: in};
    ode(K_x, time) = ((alpha_Mg*dKB_dH-dKB_dMg*dMgB_dH)*phi_H+(alpha_H*dKB_dMg-dKB_dH*dHB_dMg)*phi_Mg+(dMgB_dH*dHB_dMg-alpha_H*alpha_Mg)*phi_K)/D;
    dK_x_dt = 0{molar_per_second};
  enddef;

  def comp BINDING_IONS as
    var dHB_dMg: dimensionless {pub: out};
    var dHB_dK: dimensionless {pub: out};
    var dHB_dH: dimensionless {pub: out};
    var dMgB_dH: dimensionless {pub: out};
    var dMgB_dK: dimensionless {pub: out};
    var dMgB_dMg: dimensionless {pub: out};
    var dKB_dH: dimensionless {pub: out};
    var dKB_dMg: dimensionless {pub: out};
    var dKB_dK: dimensionless {pub: out};
    var J_H_t: molar_per_second {pub: out};
    var J_Mg_t: molar_per_second {pub: out};
    var J_K_t: molar_per_second {pub: out};
    var phi_H: molar_per_second {pub: out};
    var phi_Mg: molar_per_second {pub: out};
    var phi_K: molar_per_second {pub: out};
    var alpha_H: dimensionless {pub: out};
    var alpha_Mg: dimensionless {pub: out};
    var alpha_K: dimensionless {pub: out};
    var D: dimensionless {pub: out};
    var B_x: molar {init: 0.02};
    var K_BX: molar {init: 1e-7};
    var W_x: l_water_per_l_mito {pub: in};
    var n_A: dimensionless {pub: in};
    var J_pdh: mole_per_second_per_l_mito_volume {pub: in};
    var J_cits: mole_per_second_per_l_mito_volume {pub: in};
    var J_akgd: mole_per_second_per_l_mito_volume {pub: in};
    var J_scoas: mole_per_second_per_l_mito_volume {pub: in};
    var J_mdh: mole_per_second_per_l_mito_volume {pub: in};
    var J_PYRH: mole_per_second_per_l_mito_volume {pub: in};
    var J_GLUH: mole_per_second_per_l_mito_volume {pub: in};
    var J_CITMAL: mole_per_second_per_l_mito_volume {pub: in};
    var J_ASPGLU: mole_per_second_per_l_mito_volume {pub: in};
    var J_C1: mole_per_second_per_l_mito_volume {pub: in};
    var J_C3: mole_per_second_per_l_mito_volume {pub: in};
    var J_C4: mole_per_second_per_l_mito_volume {pub: in};
    var J_F1: mole_per_second_per_l_mito_volume {pub: in};
    var J_PIHt: mole_per_second_per_l_mito_volume {pub: in};
    var J_Hle: mole_per_second_per_l_mito_volume {pub: in};
    var J_KH: mole_per_second_per_l_mito_volume {pub: in};
    var H_x: molar {pub: in};
    var ATP_x: molar {pub: in};
    var ADP_x: molar {pub: in};
    var AMP_x: molar {pub: in};
    var GTP_x: molar {pub: in};
    var GDP_x: molar {pub: in};
    var PI_x: molar {pub: in};
    var NADH_x: molar {pub: in};
    var NAD_x: molar {pub: in};
    var QH2_x: molar {pub: in};
    var COQ_x: molar {pub: in};
    var PYR_x: molar {pub: in};
    var OAA_x: molar {pub: in};
    var ACCOA_x: molar {pub: in};
    var CIT_x: molar {pub: in};
    var ICIT_x: molar {pub: in};
    var AKG_x: molar {pub: in};
    var SCOA_x: molar {pub: in};
    var COASH_x: molar {pub: in};
    var SUC_x: molar {pub: in};
    var FUM_x: molar {pub: in};
    var MAL_x: molar {pub: in};
    var GLU_x: molar {pub: in};
    var ASP_x: molar {pub: in};
    var K_x: molar {pub: in};
    var Mg_x: molar {pub: in};
    var O2_x: molar {pub: in};
    var FADH2_x: molar {pub: in};
    var FAD_x: molar {pub: in};
    var CO2_tot_x: molar {pub: in};
    var P_H_x: dimensionless {pub: in};
    var P_ATP_x: dimensionless {pub: in};
    var P_ADP_x: dimensionless {pub: in};
    var P_AMP_x: dimensionless {pub: in};
    var P_GTP_x: dimensionless {pub: in};
    var P_GDP_x: dimensionless {pub: in};
    var P_PI_x: dimensionless {pub: in};
    var P_NADH_x: dimensionless {pub: in};
    var P_NAD_x: dimensionless {pub: in};
    var P_QH2_x: dimensionless {pub: in};
    var P_COQ_x: dimensionless {pub: in};
    var P_PYR_x: dimensionless {pub: in};
    var P_OAA_x: dimensionless {pub: in};
    var P_ACCOA_x: dimensionless {pub: in};
    var P_CIT_x: dimensionless {pub: in};
    var P_ICIT_x: dimensionless {pub: in};
    var P_AKG_x: dimensionless {pub: in};
    var P_SCOA_x: dimensionless {pub: in};
    var P_COASH_x: dimensionless {pub: in};
    var P_SUC_x: dimensionless {pub: in};
    var P_FUM_x: dimensionless {pub: in};
    var P_MAL_x: dimensionless {pub: in};
    var P_GLU_x: dimensionless {pub: in};
    var P_ASP_x: dimensionless {pub: in};
    var P_K_x: dimensionless {pub: in};
    var P_Mg_x: dimensionless {pub: in};
    var P_O2_x: dimensionless {pub: in};
    var P_FADH2_x: dimensionless {pub: in};
    var P_FAD_x: dimensionless {pub: in};
    var P_CO2_tot_x: dimensionless {pub: in};
    var KH_H_x: molar {pub: in};
    var KH_ATP_x: molar {pub: in};
    var KH_ADP_x: molar {pub: in};
    var KH_AMP_x: molar {pub: in};
    var KH_GTP_x: molar {pub: in};
    var KH_GDP_x: molar {pub: in};
    var KH_PI_x: molar {pub: in};
    var KH_NADH_x: molar {pub: in};
    var KH_NAD_x: molar {pub: in};
    var KH_QH2_x: molar {pub: in};
    var KH_COQ_x: molar {pub: in};
    var KH_PYR_x: molar {pub: in};
    var KH_OAA_x: molar {pub: in};
    var KH_ACCOA_x: molar {pub: in};
    var KH_CIT_x: molar {pub: in};
    var KH_ICIT_x: molar {pub: in};
    var KH_AKG_x: molar {pub: in};
    var KH_SCOA_x: molar {pub: in};
    var KH_COASH_x: molar {pub: in};
    var KH_SUC_x: molar {pub: in};
    var KH_FUM_x: molar {pub: in};
    var KH_MAL_x: molar {pub: in};
    var KH_GLU_x: molar {pub: in};
    var KH_ASP_x: molar {pub: in};
    var KH_K_x: molar {pub: in};
    var KH_Mg_x: molar {pub: in};
    var KH_O2_x: molar {pub: in};
    var KH_FADH2_x: molar {pub: in};
    var KH_FAD_x: molar {pub: in};
    var KH_CO2_tot_x: molar {pub: in};
    var KMg_H_x: molar {pub: in};
    var KMg_ATP_x: molar {pub: in};
    var KMg_ADP_x: molar {pub: in};
    var KMg_AMP_x: molar {pub: in};
    var KMg_GTP_x: molar {pub: in};
    var KMg_GDP_x: molar {pub: in};
    var KMg_PI_x: molar {pub: in};
    var KMg_NADH_x: molar {pub: in};
    var KMg_NAD_x: molar {pub: in};
    var KMg_QH2_x: molar {pub: in};
    var KMg_COQ_x: molar {pub: in};
    var KMg_PYR_x: molar {pub: in};
    var KMg_OAA_x: molar {pub: in};
    var KMg_ACCOA_x: molar {pub: in};
    var KMg_CIT_x: molar {pub: in};
    var KMg_ICIT_x: molar {pub: in};
    var KMg_AKG_x: molar {pub: in};
    var KMg_SCOA_x: molar {pub: in};
    var KMg_COASH_x: molar {pub: in};
    var KMg_SUC_x: molar {pub: in};
    var KMg_FUM_x: molar {pub: in};
    var KMg_MAL_x: molar {pub: in};
    var KMg_GLU_x: molar {pub: in};
    var KMg_ASP_x: molar {pub: in};
    var KMg_K_x: molar {pub: in};
    var KMg_Mg_x: molar {pub: in};
    var KMg_O2_x: molar {pub: in};
    var KMg_FADH2_x: molar {pub: in};
    var KMg_FAD_x: molar {pub: in};
    var KMg_CO2_tot_x: molar {pub: in};
    var KK_H_x: molar {pub: in};
    var KK_ATP_x: molar {pub: in};
    var KK_ADP_x: molar {pub: in};
    var KK_AMP_x: molar {pub: in};
    var KK_GTP_x: molar {pub: in};
    var KK_GDP_x: molar {pub: in};
    var KK_PI_x: molar {pub: in};
    var KK_NADH_x: molar {pub: in};
    var KK_NAD_x: molar {pub: in};
    var KK_QH2_x: molar {pub: in};
    var KK_COQ_x: molar {pub: in};
    var KK_PYR_x: molar {pub: in};
    var KK_OAA_x: molar {pub: in};
    var KK_ACCOA_x: molar {pub: in};
    var KK_CIT_x: molar {pub: in};
    var KK_ICIT_x: molar {pub: in};
    var KK_AKG_x: molar {pub: in};
    var KK_SCOA_x: molar {pub: in};
    var KK_COASH_x: molar {pub: in};
    var KK_SUC_x: molar {pub: in};
    var KK_FUM_x: molar {pub: in};
    var KK_MAL_x: molar {pub: in};
    var KK_GLU_x: molar {pub: in};
    var KK_ASP_x: molar {pub: in};
    var KK_K_x: molar {pub: in};
    var KK_Mg_x: molar {pub: in};
    var KK_O2_x: molar {pub: in};
    var KK_FADH2_x: molar {pub: in};
    var KK_FAD_x: molar {pub: in};
    var KK_CO2_tot_x: molar {pub: in};
    var dH_x_dt: molar_per_second {pub: in};
    var dATP_x_dt: molar_per_second {pub: in};
    var dADP_x_dt: molar_per_second {pub: in};
    var dAMP_x_dt: molar_per_second {pub: in};
    var dGTP_x_dt: molar_per_second {pub: in};
    var dGDP_x_dt: molar_per_second {pub: in};
    var dPI_x_dt: molar_per_second {pub: in};
    var dNADH_x_dt: molar_per_second {pub: in};
    var dNAD_x_dt: molar_per_second {pub: in};
    var dQH2_x_dt: molar_per_second {pub: in};
    var dCOQ_x_dt: molar_per_second {pub: in};
    var dPYR_x_dt: molar_per_second {pub: in};
    var dOAA_x_dt: molar_per_second {pub: in};
    var dACCOA_x_dt: molar_per_second {pub: in};
    var dCIT_x_dt: molar_per_second {pub: in};
    var dICIT_x_dt: molar_per_second {pub: in};
    var dAKG_x_dt: molar_per_second {pub: in};
    var dSCOA_x_dt: molar_per_second {pub: in};
    var dCOASH_x_dt: molar_per_second {pub: in};
    var dSUC_x_dt: molar_per_second {pub: in};
    var dFUM_x_dt: molar_per_second {pub: in};
    var dMAL_x_dt: molar_per_second {pub: in};
    var dGLU_x_dt: molar_per_second {pub: in};
    var dASP_x_dt: molar_per_second {pub: in};
    var dK_x_dt: molar_per_second {pub: in};
    var dMg_x_dt: molar_per_second {pub: in};
    var dO2_x_dt: molar_per_second {pub: in};
    var dFADH2_x_dt: molar_per_second {pub: in};
    var dFAD_x_dt: molar_per_second {pub: in};
    var dCO2_tot_x_dt: molar_per_second {pub: in};
    dHB_dMg = -(H_x*H_x/(KH_H_x*KMg_H_x*sqr(P_H_x))+H_x*ATP_x/(KH_ATP_x*KMg_ATP_x*sqr(P_ATP_x))+H_x*ADP_x/(KH_ADP_x*KMg_ADP_x*sqr(P_ADP_x))+H_x*AMP_x/(KH_AMP_x*KMg_AMP_x*sqr(P_AMP_x))+H_x*GTP_x/(KH_GTP_x*KMg_GTP_x*sqr(P_GTP_x))+H_x*GDP_x/(KH_GDP_x*KMg_GDP_x*sqr(P_GDP_x))+H_x*PI_x/(KH_PI_x*KMg_PI_x*sqr(P_PI_x))+H_x*NADH_x/(KH_NADH_x*KMg_NADH_x*sqr(P_NADH_x))+H_x*NAD_x/(KH_NAD_x*KMg_NAD_x*sqr(P_NAD_x))+H_x*QH2_x/(KH_QH2_x*KMg_QH2_x*sqr(P_QH2_x))+H_x*COQ_x/(KH_COQ_x*KMg_COQ_x*sqr(P_COQ_x))+H_x*PYR_x/(KH_PYR_x*KMg_PYR_x*sqr(P_PYR_x))+H_x*OAA_x/(KH_OAA_x*KMg_OAA_x*sqr(P_OAA_x))+H_x*ACCOA_x/(KH_ACCOA_x*KMg_ACCOA_x*sqr(P_ACCOA_x))+H_x*CIT_x/(KH_CIT_x*KMg_CIT_x*sqr(P_CIT_x))+H_x*ICIT_x/(KH_ICIT_x*KMg_ICIT_x*sqr(P_ICIT_x))+H_x*AKG_x/(KH_AKG_x*KMg_AKG_x*sqr(P_AKG_x))+H_x*SCOA_x/(KH_SCOA_x*KMg_SCOA_x*sqr(P_SCOA_x))+H_x*COASH_x/(KH_COASH_x*KMg_COASH_x*sqr(P_COASH_x))+H_x*SUC_x/(KH_SUC_x*KMg_SUC_x*sqr(P_SUC_x))+H_x*FUM_x/(KH_FUM_x*KMg_FUM_x*sqr(P_FUM_x))+H_x*MAL_x/(KH_MAL_x*KMg_MAL_x*sqr(P_MAL_x))+H_x*GLU_x/(KH_GLU_x*KMg_GLU_x*sqr(P_GLU_x))+H_x*ASP_x/(KH_ASP_x*KMg_ASP_x*sqr(P_ASP_x))+H_x*K_x/(KH_K_x*KMg_K_x*sqr(P_K_x))+H_x*Mg_x/(KH_Mg_x*KMg_Mg_x*sqr(P_Mg_x))+H_x*O2_x/(KH_O2_x*KMg_O2_x*sqr(P_O2_x))+H_x*FADH2_x/(KH_FADH2_x*KMg_FADH2_x*sqr(P_FADH2_x))+H_x*FAD_x/(KH_FAD_x*KMg_FAD_x*sqr(P_FAD_x))+H_x*CO2_tot_x/(KH_CO2_tot_x*KMg_CO2_tot_x*sqr(P_CO2_tot_x)));
    dHB_dK = -(H_x*H_x/(KH_H_x*KK_H_x*sqr(P_H_x))+H_x*ATP_x/(KH_ATP_x*KK_ATP_x*sqr(P_ATP_x))+H_x*ADP_x/(KH_ADP_x*KK_ADP_x*sqr(P_ADP_x))+H_x*AMP_x/(KH_AMP_x*KK_AMP_x*sqr(P_AMP_x))+H_x*GTP_x/(KH_GTP_x*KK_GTP_x*sqr(P_GTP_x))+H_x*GDP_x/(KH_GDP_x*KK_GDP_x*sqr(P_GDP_x))+H_x*PI_x/(KH_PI_x*KK_PI_x*sqr(P_PI_x))+H_x*NADH_x/(KH_NADH_x*KK_NADH_x*sqr(P_NADH_x))+H_x*NAD_x/(KH_NAD_x*KK_NAD_x*sqr(P_NAD_x))+H_x*QH2_x/(KH_QH2_x*KK_QH2_x*sqr(P_QH2_x))+H_x*COQ_x/(KH_COQ_x*KK_COQ_x*sqr(P_COQ_x))+H_x*PYR_x/(KH_PYR_x*KK_PYR_x*sqr(P_PYR_x))+H_x*OAA_x/(KH_OAA_x*KK_OAA_x*sqr(P_OAA_x))+H_x*ACCOA_x/(KH_ACCOA_x*KK_ACCOA_x*sqr(P_ACCOA_x))+H_x*CIT_x/(KH_CIT_x*KK_CIT_x*sqr(P_CIT_x))+H_x*ICIT_x/(KH_ICIT_x*KK_ICIT_x*sqr(P_ICIT_x))+H_x*AKG_x/(KH_AKG_x*KK_AKG_x*sqr(P_AKG_x))+H_x*SCOA_x/(KH_SCOA_x*KK_SCOA_x*sqr(P_SCOA_x))+H_x*COASH_x/(KH_COASH_x*KK_COASH_x*sqr(P_COASH_x))+H_x*SUC_x/(KH_SUC_x*KK_SUC_x*sqr(P_SUC_x))+H_x*FUM_x/(KH_FUM_x*KK_FUM_x*sqr(P_FUM_x))+H_x*MAL_x/(KH_MAL_x*KK_MAL_x*sqr(P_MAL_x))+H_x*GLU_x/(KH_GLU_x*KK_GLU_x*sqr(P_GLU_x))+H_x*ASP_x/(KH_ASP_x*KK_ASP_x*sqr(P_ASP_x))+H_x*K_x/(KH_K_x*KK_K_x*sqr(P_K_x))+H_x*Mg_x/(KH_Mg_x*KK_Mg_x*sqr(P_Mg_x))+H_x*O2_x/(KH_O2_x*KK_O2_x*sqr(P_O2_x))+H_x*FADH2_x/(KH_FADH2_x*KK_FADH2_x*sqr(P_FADH2_x))+H_x*FAD_x/(KH_FAD_x*KK_FAD_x*sqr(P_FAD_x))+H_x*CO2_tot_x/(KH_CO2_tot_x*KK_CO2_tot_x*sqr(P_CO2_tot_x)));
    dHB_dH = (1{dimensionless}+Mg_x/KMg_H_x+K_x/KK_H_x)*H_x/(KH_H_x*sqr(P_H_x))+(1{dimensionless}+Mg_x/KMg_ATP_x+K_x/KK_ATP_x)*ATP_x/(KH_ATP_x*sqr(P_ATP_x))+(1{dimensionless}+Mg_x/KMg_ADP_x+K_x/KK_ADP_x)*ADP_x/(KH_ADP_x*sqr(P_ADP_x))+(1{dimensionless}+Mg_x/KMg_AMP_x+K_x/KK_AMP_x)*AMP_x/(KH_AMP_x*sqr(P_AMP_x))+(1{dimensionless}+Mg_x/KMg_GTP_x+K_x/KK_GTP_x)*GTP_x/(KH_GTP_x*sqr(P_GTP_x))+(1{dimensionless}+Mg_x/KMg_GDP_x+K_x/KK_GDP_x)*GDP_x/(KH_GDP_x*sqr(P_GDP_x))+(1{dimensionless}+Mg_x/KMg_PI_x+K_x/KK_PI_x)*PI_x/(KH_PI_x*sqr(P_PI_x))+(1{dimensionless}+Mg_x/KMg_NADH_x+K_x/KK_NADH_x)*NADH_x/(KH_NADH_x*sqr(P_NADH_x))+(1{dimensionless}+Mg_x/KMg_NAD_x+K_x/KK_NAD_x)*NAD_x/(KH_NAD_x*sqr(P_NAD_x))+(1{dimensionless}+Mg_x/KMg_QH2_x+K_x/KK_QH2_x)*QH2_x/(KH_QH2_x*sqr(P_QH2_x))+(1{dimensionless}+Mg_x/KMg_COQ_x+K_x/KK_COQ_x)*COQ_x/(KH_COQ_x*sqr(P_COQ_x))+(1{dimensionless}+Mg_x/KMg_PYR_x+K_x/KK_PYR_x)*PYR_x/(KH_PYR_x*sqr(P_PYR_x))+(1{dimensionless}+Mg_x/KMg_OAA_x+K_x/KK_OAA_x)*OAA_x/(KH_OAA_x*sqr(P_OAA_x))+(1{dimensionless}+Mg_x/KMg_ACCOA_x+K_x/KK_ACCOA_x)*ACCOA_x/(KH_ACCOA_x*sqr(P_ACCOA_x))+(1{dimensionless}+Mg_x/KMg_CIT_x+K_x/KK_CIT_x)*CIT_x/(KH_CIT_x*sqr(P_CIT_x))+(1{dimensionless}+Mg_x/KMg_ICIT_x+K_x/KK_ICIT_x)*ICIT_x/(KH_ICIT_x*sqr(P_ICIT_x))+(1{dimensionless}+Mg_x/KMg_AKG_x+K_x/KK_AKG_x)*AKG_x/(KH_AKG_x*sqr(P_AKG_x))+(1{dimensionless}+Mg_x/KMg_SCOA_x+K_x/KK_SCOA_x)*SCOA_x/(KH_SCOA_x*sqr(P_SCOA_x))+(1{dimensionless}+Mg_x/KMg_COASH_x+K_x/KK_COASH_x)*COASH_x/(KH_COASH_x*sqr(P_COASH_x))+(1{dimensionless}+Mg_x/KMg_SUC_x+K_x/KK_SUC_x)*SUC_x/(KH_SUC_x*sqr(P_SUC_x))+(1{dimensionless}+Mg_x/KMg_FUM_x+K_x/KK_FUM_x)*FUM_x/(KH_FUM_x*sqr(P_FUM_x))+(1{dimensionless}+Mg_x/KMg_MAL_x+K_x/KK_MAL_x)*MAL_x/(KH_MAL_x*sqr(P_MAL_x))+(1{dimensionless}+Mg_x/KMg_GLU_x+K_x/KK_GLU_x)*GLU_x/(KH_GLU_x*sqr(P_GLU_x))+(1{dimensionless}+Mg_x/KMg_ASP_x+K_x/KK_ASP_x)*ASP_x/(KH_ASP_x*sqr(P_ASP_x))+(1{dimensionless}+Mg_x/KMg_K_x+K_x/KK_K_x)*K_x/(KH_K_x*sqr(P_K_x))+(1{dimensionless}+Mg_x/KMg_Mg_x+K_x/KK_Mg_x)*Mg_x/(KH_Mg_x*sqr(P_Mg_x))+(1{dimensionless}+Mg_x/KMg_O2_x+K_x/KK_O2_x)*O2_x/(KH_O2_x*sqr(P_O2_x))+(1{dimensionless}+Mg_x/KMg_FADH2_x+K_x/KK_FADH2_x)*FADH2_x/(KH_FADH2_x*sqr(P_FADH2_x))+(1{dimensionless}+Mg_x/KMg_FAD_x+K_x/KK_FAD_x)*FAD_x/(KH_FAD_x*sqr(P_FAD_x))+(1{dimensionless}+Mg_x/KMg_CO2_tot_x+K_x/KK_CO2_tot_x)*CO2_tot_x/(KH_CO2_tot_x*sqr(P_CO2_tot_x));
    dMgB_dH = -(Mg_x*H_x/(KMg_H_x*KH_H_x*sqr(P_H_x))+Mg_x*ATP_x/(KMg_ATP_x*KH_ATP_x*sqr(P_ATP_x))+Mg_x*ADP_x/(KMg_ADP_x*KH_ADP_x*sqr(P_ADP_x))+Mg_x*AMP_x/(KMg_AMP_x*KH_AMP_x*sqr(P_AMP_x))+Mg_x*GTP_x/(KMg_GTP_x*KH_GTP_x*sqr(P_GTP_x))+Mg_x*GDP_x/(KMg_GDP_x*KH_GDP_x*sqr(P_GDP_x))+Mg_x*PI_x/(KMg_PI_x*KH_PI_x*sqr(P_PI_x))+Mg_x*NADH_x/(KMg_NADH_x*KH_NADH_x*sqr(P_NADH_x))+Mg_x*NAD_x/(KMg_NAD_x*KH_NAD_x*sqr(P_NAD_x))+Mg_x*QH2_x/(KMg_QH2_x*KH_QH2_x*sqr(P_QH2_x))+Mg_x*COQ_x/(KMg_COQ_x*KH_COQ_x*sqr(P_COQ_x))+Mg_x*PYR_x/(KMg_PYR_x*KH_PYR_x*sqr(P_PYR_x))+Mg_x*OAA_x/(KMg_OAA_x*KH_OAA_x*sqr(P_OAA_x))+Mg_x*ACCOA_x/(KMg_ACCOA_x*KH_ACCOA_x*sqr(P_ACCOA_x))+Mg_x*CIT_x/(KMg_CIT_x*KH_CIT_x*sqr(P_CIT_x))+Mg_x*ICIT_x/(KMg_ICIT_x*KH_ICIT_x*sqr(P_ICIT_x))+Mg_x*AKG_x/(KMg_AKG_x*KH_AKG_x*sqr(P_AKG_x))+Mg_x*SCOA_x/(KMg_SCOA_x*KH_SCOA_x*sqr(P_SCOA_x))+Mg_x*COASH_x/(KMg_COASH_x*KH_COASH_x*sqr(P_COASH_x))+Mg_x*SUC_x/(KMg_SUC_x*KH_SUC_x*sqr(P_SUC_x))+Mg_x*FUM_x/(KMg_FUM_x*KH_FUM_x*sqr(P_FUM_x))+Mg_x*MAL_x/(KMg_MAL_x*KH_MAL_x*sqr(P_MAL_x))+Mg_x*GLU_x/(KMg_GLU_x*KH_GLU_x*sqr(P_GLU_x))+Mg_x*ASP_x/(KMg_ASP_x*KH_ASP_x*sqr(P_ASP_x))+Mg_x*K_x/(KMg_K_x*KH_K_x*sqr(P_K_x))+Mg_x*Mg_x/(KMg_Mg_x*KH_Mg_x*sqr(P_Mg_x))+Mg_x*O2_x/(KMg_O2_x*KH_O2_x*sqr(P_O2_x))+Mg_x*FADH2_x/(KMg_FADH2_x*KH_FADH2_x*sqr(P_FADH2_x))+Mg_x*FAD_x/(KMg_FAD_x*KH_FAD_x*sqr(P_FAD_x))+Mg_x*CO2_tot_x/(KMg_CO2_tot_x*KH_CO2_tot_x*sqr(P_CO2_tot_x)));
    dMgB_dK = -(Mg_x*H_x/(KMg_H_x*KK_H_x*sqr(P_H_x))+Mg_x*ATP_x/(KMg_ATP_x*KK_ATP_x*sqr(P_ATP_x))+Mg_x*ADP_x/(KMg_ADP_x*KK_ADP_x*sqr(P_ADP_x))+Mg_x*AMP_x/(KMg_AMP_x*KK_AMP_x*sqr(P_AMP_x))+Mg_x*GTP_x/(KMg_GTP_x*KK_GTP_x*sqr(P_GTP_x))+Mg_x*GDP_x/(KMg_GDP_x*KK_GDP_x*sqr(P_GDP_x))+Mg_x*PI_x/(KMg_PI_x*KK_PI_x*sqr(P_PI_x))+Mg_x*NADH_x/(KMg_NADH_x*KK_NADH_x*sqr(P_NADH_x))+Mg_x*NAD_x/(KMg_NAD_x*KK_NAD_x*sqr(P_NAD_x))+Mg_x*QH2_x/(KMg_QH2_x*KK_QH2_x*sqr(P_QH2_x))+Mg_x*COQ_x/(KMg_COQ_x*KK_COQ_x*sqr(P_COQ_x))+Mg_x*PYR_x/(KMg_PYR_x*KK_PYR_x*sqr(P_PYR_x))+Mg_x*OAA_x/(KMg_OAA_x*KK_OAA_x*sqr(P_OAA_x))+Mg_x*ACCOA_x/(KMg_ACCOA_x*KK_ACCOA_x*sqr(P_ACCOA_x))+Mg_x*CIT_x/(KMg_CIT_x*KK_CIT_x*sqr(P_CIT_x))+Mg_x*ICIT_x/(KMg_ICIT_x*KK_ICIT_x*sqr(P_ICIT_x))+Mg_x*AKG_x/(KMg_AKG_x*KK_AKG_x*sqr(P_AKG_x))+Mg_x*SCOA_x/(KMg_SCOA_x*KK_SCOA_x*sqr(P_SCOA_x))+Mg_x*COASH_x/(KMg_COASH_x*KK_COASH_x*sqr(P_COASH_x))+Mg_x*SUC_x/(KMg_SUC_x*KK_SUC_x*sqr(P_SUC_x))+Mg_x*FUM_x/(KMg_FUM_x*KK_FUM_x*sqr(P_FUM_x))+Mg_x*MAL_x/(KMg_MAL_x*KK_MAL_x*sqr(P_MAL_x))+Mg_x*GLU_x/(KMg_GLU_x*KK_GLU_x*sqr(P_GLU_x))+Mg_x*ASP_x/(KMg_ASP_x*KK_ASP_x*sqr(P_ASP_x))+Mg_x*K_x/(KMg_K_x*KK_K_x*sqr(P_K_x))+Mg_x*Mg_x/(KMg_Mg_x*KK_Mg_x*sqr(P_Mg_x))+Mg_x*O2_x/(KMg_O2_x*KK_O2_x*sqr(P_O2_x))+Mg_x*FADH2_x/(KMg_FADH2_x*KK_FADH2_x*sqr(P_FADH2_x))+Mg_x*FAD_x/(KMg_FAD_x*KK_FAD_x*sqr(P_FAD_x))+Mg_x*CO2_tot_x/(KMg_CO2_tot_x*KK_CO2_tot_x*sqr(P_CO2_tot_x)));
    dMgB_dMg = (1{dimensionless}+H_x/KH_H_x+K_x/KK_H_x)*H_x/(KMg_H_x*sqr(P_H_x))+(1{dimensionless}+H_x/KH_ATP_x+K_x/KK_ATP_x)*ATP_x/(KMg_ATP_x*sqr(P_ATP_x))+(1{dimensionless}+H_x/KH_ADP_x+K_x/KK_ADP_x)*ADP_x/(KMg_ADP_x*sqr(P_ADP_x))+(1{dimensionless}+H_x/KH_AMP_x+K_x/KK_AMP_x)*AMP_x/(KMg_AMP_x*sqr(P_AMP_x))+(1{dimensionless}+H_x/KH_GTP_x+K_x/KK_GTP_x)*GTP_x/(KMg_GTP_x*sqr(P_GTP_x))+(1{dimensionless}+H_x/KH_GDP_x+K_x/KK_GDP_x)*GDP_x/(KMg_GDP_x*sqr(P_GDP_x))+(1{dimensionless}+H_x/KH_PI_x+K_x/KK_PI_x)*PI_x/(KMg_PI_x*sqr(P_PI_x))+(1{dimensionless}+H_x/KH_NADH_x+K_x/KK_NADH_x)*NADH_x/(KMg_NADH_x*sqr(P_NADH_x))+(1{dimensionless}+H_x/KH_NAD_x+K_x/KK_NAD_x)*NAD_x/(KMg_NAD_x*sqr(P_NAD_x))+(1{dimensionless}+H_x/KH_QH2_x+K_x/KK_QH2_x)*QH2_x/(KMg_QH2_x*sqr(P_QH2_x))+(1{dimensionless}+H_x/KH_COQ_x+K_x/KK_COQ_x)*COQ_x/(KMg_COQ_x*sqr(P_COQ_x))+(1{dimensionless}+H_x/KH_PYR_x+K_x/KK_PYR_x)*PYR_x/(KMg_PYR_x*sqr(P_PYR_x))+(1{dimensionless}+H_x/KH_OAA_x+K_x/KK_OAA_x)*OAA_x/(KMg_OAA_x*sqr(P_OAA_x))+(1{dimensionless}+H_x/KH_ACCOA_x+K_x/KK_ACCOA_x)*ACCOA_x/(KMg_ACCOA_x*sqr(P_ACCOA_x))+(1{dimensionless}+H_x/KH_CIT_x+K_x/KK_CIT_x)*CIT_x/(KMg_CIT_x*sqr(P_CIT_x))+(1{dimensionless}+H_x/KH_ICIT_x+K_x/KK_ICIT_x)*ICIT_x/(KMg_ICIT_x*sqr(P_ICIT_x))+(1{dimensionless}+H_x/KH_AKG_x+K_x/KK_AKG_x)*AKG_x/(KMg_AKG_x*sqr(P_AKG_x))+(1{dimensionless}+H_x/KH_SCOA_x+K_x/KK_SCOA_x)*SCOA_x/(KMg_SCOA_x*sqr(P_SCOA_x))+(1{dimensionless}+H_x/KH_COASH_x+K_x/KK_COASH_x)*COASH_x/(KMg_COASH_x*sqr(P_COASH_x))+(1{dimensionless}+H_x/KH_SUC_x+K_x/KK_SUC_x)*SUC_x/(KMg_SUC_x*sqr(P_SUC_x))+(1{dimensionless}+H_x/KH_FUM_x+K_x/KK_FUM_x)*FUM_x/(KMg_FUM_x*sqr(P_FUM_x))+(1{dimensionless}+H_x/KH_MAL_x+K_x/KK_MAL_x)*MAL_x/(KMg_MAL_x*sqr(P_MAL_x))+(1{dimensionless}+H_x/KH_GLU_x+K_x/KK_GLU_x)*GLU_x/(KMg_GLU_x*sqr(P_GLU_x))+(1{dimensionless}+H_x/KH_ASP_x+K_x/KK_ASP_x)*ASP_x/(KMg_ASP_x*sqr(P_ASP_x))+(1{dimensionless}+H_x/KH_K_x+K_x/KK_K_x)*K_x/(KMg_K_x*sqr(P_K_x))+(1{dimensionless}+H_x/KH_Mg_x+K_x/KK_Mg_x)*Mg_x/(KMg_Mg_x*sqr(P_Mg_x))+(1{dimensionless}+H_x/KH_O2_x+K_x/KK_O2_x)*O2_x/(KMg_O2_x*sqr(P_O2_x))+(1{dimensionless}+H_x/KH_FADH2_x+K_x/KK_FADH2_x)*FADH2_x/(KMg_FADH2_x*sqr(P_FADH2_x))+(1{dimensionless}+H_x/KH_FAD_x+K_x/KK_FAD_x)*FAD_x/(KMg_FAD_x*sqr(P_FAD_x))+(1{dimensionless}+H_x/KH_CO2_tot_x+K_x/KK_CO2_tot_x)*CO2_tot_x/(KMg_CO2_tot_x*sqr(P_CO2_tot_x));
    dKB_dH = -(K_x*H_x/(KK_H_x*KH_H_x*sqr(P_H_x))+K_x*ATP_x/(KK_ATP_x*KH_ATP_x*sqr(P_ATP_x))+K_x*ADP_x/(KK_ADP_x*KH_ADP_x*sqr(P_ADP_x))+K_x*AMP_x/(KK_AMP_x*KH_AMP_x*sqr(P_AMP_x))+K_x*GTP_x/(KK_GTP_x*KH_GTP_x*sqr(P_GTP_x))+K_x*GDP_x/(KK_GDP_x*KH_GDP_x*sqr(P_GDP_x))+K_x*PI_x/(KK_PI_x*KH_PI_x*sqr(P_PI_x))+K_x*NADH_x/(KK_NADH_x*KH_NADH_x*sqr(P_NADH_x))+K_x*NAD_x/(KK_NAD_x*KH_NAD_x*sqr(P_NAD_x))+K_x*QH2_x/(KK_QH2_x*KH_QH2_x*sqr(P_QH2_x))+K_x*COQ_x/(KK_COQ_x*KH_COQ_x*sqr(P_COQ_x))+K_x*PYR_x/(KK_PYR_x*KH_PYR_x*sqr(P_PYR_x))+K_x*OAA_x/(KK_OAA_x*KH_OAA_x*sqr(P_OAA_x))+K_x*ACCOA_x/(KK_ACCOA_x*KH_ACCOA_x*sqr(P_ACCOA_x))+K_x*CIT_x/(KK_CIT_x*KH_CIT_x*sqr(P_CIT_x))+K_x*ICIT_x/(KK_ICIT_x*KH_ICIT_x*sqr(P_ICIT_x))+K_x*AKG_x/(KK_AKG_x*KH_AKG_x*sqr(P_AKG_x))+K_x*SCOA_x/(KK_SCOA_x*KH_SCOA_x*sqr(P_SCOA_x))+K_x*COASH_x/(KK_COASH_x*KH_COASH_x*sqr(P_COASH_x))+K_x*SUC_x/(KK_SUC_x*KH_SUC_x*sqr(P_SUC_x))+K_x*FUM_x/(KK_FUM_x*KH_FUM_x*sqr(P_FUM_x))+K_x*MAL_x/(KK_MAL_x*KH_MAL_x*sqr(P_MAL_x))+K_x*GLU_x/(KK_GLU_x*KH_GLU_x*sqr(P_GLU_x))+K_x*ASP_x/(KK_ASP_x*KH_ASP_x*sqr(P_ASP_x))+K_x*K_x/(KK_K_x*KH_K_x*sqr(P_K_x))+K_x*Mg_x/(KK_Mg_x*KH_Mg_x*sqr(P_Mg_x))+K_x*O2_x/(KK_O2_x*KH_O2_x*sqr(P_O2_x))+K_x*FADH2_x/(KK_FADH2_x*KH_FADH2_x*sqr(P_FADH2_x))+K_x*FAD_x/(KK_FAD_x*KH_FAD_x*sqr(P_FAD_x))+K_x*CO2_tot_x/(KK_CO2_tot_x*KH_CO2_tot_x*sqr(P_CO2_tot_x)));
    dKB_dMg = -(K_x*H_x/(KK_H_x*KMg_H_x*sqr(P_H_x))+K_x*ATP_x/(KK_ATP_x*KMg_ATP_x*sqr(P_ATP_x))+K_x*ADP_x/(KK_ADP_x*KMg_ADP_x*sqr(P_ADP_x))+K_x*AMP_x/(KK_AMP_x*KMg_AMP_x*sqr(P_AMP_x))+K_x*GTP_x/(KK_GTP_x*KMg_GTP_x*sqr(P_GTP_x))+K_x*GDP_x/(KK_GDP_x*KMg_GDP_x*sqr(P_GDP_x))+K_x*PI_x/(KK_PI_x*KMg_PI_x*sqr(P_PI_x))+K_x*NADH_x/(KK_NADH_x*KMg_NADH_x*sqr(P_NADH_x))+K_x*NAD_x/(KK_NAD_x*KMg_NAD_x*sqr(P_NAD_x))+K_x*QH2_x/(KK_QH2_x*KMg_QH2_x*sqr(P_QH2_x))+K_x*COQ_x/(KK_COQ_x*KMg_COQ_x*sqr(P_COQ_x))+K_x*PYR_x/(KK_PYR_x*KMg_PYR_x*sqr(P_PYR_x))+K_x*OAA_x/(KK_OAA_x*KMg_OAA_x*sqr(P_OAA_x))+K_x*ACCOA_x/(KK_ACCOA_x*KMg_ACCOA_x*sqr(P_ACCOA_x))+K_x*CIT_x/(KK_CIT_x*KMg_CIT_x*sqr(P_CIT_x))+K_x*ICIT_x/(KK_ICIT_x*KMg_ICIT_x*sqr(P_ICIT_x))+K_x*AKG_x/(KK_AKG_x*KMg_AKG_x*sqr(P_AKG_x))+K_x*SCOA_x/(KK_SCOA_x*KMg_SCOA_x*sqr(P_SCOA_x))+K_x*COASH_x/(KK_COASH_x*KMg_COASH_x*sqr(P_COASH_x))+K_x*SUC_x/(KK_SUC_x*KMg_SUC_x*sqr(P_SUC_x))+K_x*FUM_x/(KK_FUM_x*KMg_FUM_x*sqr(P_FUM_x))+K_x*MAL_x/(KK_MAL_x*KMg_MAL_x*sqr(P_MAL_x))+K_x*GLU_x/(KK_GLU_x*KMg_GLU_x*sqr(P_GLU_x))+K_x*ASP_x/(KK_ASP_x*KMg_ASP_x*sqr(P_ASP_x))+K_x*K_x/(KK_K_x*KMg_K_x*sqr(P_K_x))+K_x*Mg_x/(KK_Mg_x*KMg_Mg_x*sqr(P_Mg_x))+K_x*O2_x/(KK_O2_x*KMg_O2_x*sqr(P_O2_x))+K_x*FADH2_x/(KK_FADH2_x*KMg_FADH2_x*sqr(P_FADH2_x))+K_x*FAD_x/(KK_FAD_x*KMg_FAD_x*sqr(P_FAD_x))+K_x*CO2_tot_x/(KK_CO2_tot_x*KMg_CO2_tot_x*sqr(P_CO2_tot_x)));
    dKB_dK = (1{dimensionless}+H_x/KH_H_x+Mg_x/KMg_H_x)*H_x/(KK_H_x*sqr(P_H_x))+(1{dimensionless}+H_x/KH_ATP_x+Mg_x/KMg_ATP_x)*ATP_x/(KK_ATP_x*sqr(P_ATP_x))+(1{dimensionless}+H_x/KH_ADP_x+Mg_x/KMg_ADP_x)*ADP_x/(KK_ADP_x*sqr(P_ADP_x))+(1{dimensionless}+H_x/KH_AMP_x+Mg_x/KMg_AMP_x)*AMP_x/(KK_AMP_x*sqr(P_AMP_x))+(1{dimensionless}+H_x/KH_GTP_x+Mg_x/KMg_GTP_x)*GTP_x/(KK_GTP_x*sqr(P_GTP_x))+(1{dimensionless}+H_x/KH_GDP_x+Mg_x/KMg_GDP_x)*GDP_x/(KK_GDP_x*sqr(P_GDP_x))+(1{dimensionless}+H_x/KH_PI_x+Mg_x/KMg_PI_x)*PI_x/(KK_PI_x*sqr(P_PI_x))+(1{dimensionless}+H_x/KH_NADH_x+Mg_x/KMg_NADH_x)*NADH_x/(KK_NADH_x*sqr(P_NADH_x))+(1{dimensionless}+H_x/KH_NAD_x+Mg_x/KMg_NAD_x)*NAD_x/(KK_NAD_x*sqr(P_NAD_x))+(1{dimensionless}+H_x/KH_QH2_x+Mg_x/KMg_QH2_x)*QH2_x/(KK_QH2_x*sqr(P_QH2_x))+(1{dimensionless}+H_x/KH_COQ_x+Mg_x/KMg_COQ_x)*COQ_x/(KK_COQ_x*sqr(P_COQ_x))+(1{dimensionless}+H_x/KH_PYR_x+Mg_x/KMg_PYR_x)*PYR_x/(KK_PYR_x*sqr(P_PYR_x))+(1{dimensionless}+H_x/KH_OAA_x+Mg_x/KMg_OAA_x)*OAA_x/(KK_OAA_x*sqr(P_OAA_x))+(1{dimensionless}+H_x/KH_ACCOA_x+Mg_x/KMg_ACCOA_x)*ACCOA_x/(KK_ACCOA_x*sqr(P_ACCOA_x))+(1{dimensionless}+H_x/KH_CIT_x+Mg_x/KMg_CIT_x)*CIT_x/(KK_CIT_x*sqr(P_CIT_x))+(1{dimensionless}+H_x/KH_ICIT_x+Mg_x/KMg_ICIT_x)*ICIT_x/(KK_ICIT_x*sqr(P_ICIT_x))+(1{dimensionless}+H_x/KH_AKG_x+Mg_x/KMg_AKG_x)*AKG_x/(KK_AKG_x*sqr(P_AKG_x))+(1{dimensionless}+H_x/KH_SCOA_x+Mg_x/KMg_SCOA_x)*SCOA_x/(KK_SCOA_x*sqr(P_SCOA_x))+(1{dimensionless}+H_x/KH_COASH_x+Mg_x/KMg_COASH_x)*COASH_x/(KK_COASH_x*sqr(P_COASH_x))+(1{dimensionless}+H_x/KH_SUC_x+Mg_x/KMg_SUC_x)*SUC_x/(KK_SUC_x*sqr(P_SUC_x))+(1{dimensionless}+H_x/KH_FUM_x+Mg_x/KMg_FUM_x)*FUM_x/(KK_FUM_x*sqr(P_FUM_x))+(1{dimensionless}+H_x/KH_MAL_x+Mg_x/KMg_MAL_x)*MAL_x/(KK_MAL_x*sqr(P_MAL_x))+(1{dimensionless}+H_x/KH_GLU_x+Mg_x/KMg_GLU_x)*GLU_x/(KK_GLU_x*sqr(P_GLU_x))+(1{dimensionless}+H_x/KH_ASP_x+Mg_x/KMg_ASP_x)*ASP_x/(KK_ASP_x*sqr(P_ASP_x))+(1{dimensionless}+H_x/KH_K_x+Mg_x/KMg_K_x)*K_x/(KK_K_x*sqr(P_K_x))+(1{dimensionless}+H_x/KH_Mg_x+Mg_x/KMg_Mg_x)*Mg_x/(KK_Mg_x*sqr(P_Mg_x))+(1{dimensionless}+H_x/KH_O2_x+Mg_x/KMg_O2_x)*O2_x/(KK_O2_x*sqr(P_O2_x))+(1{dimensionless}+H_x/KH_FADH2_x+Mg_x/KMg_FADH2_x)*FADH2_x/(KK_FADH2_x*sqr(P_FADH2_x))+(1{dimensionless}+H_x/KH_FAD_x+Mg_x/KMg_FAD_x)*FAD_x/(KK_FAD_x*sqr(P_FAD_x))+(1{dimensionless}+H_x/KH_CO2_tot_x+Mg_x/KMg_CO2_tot_x)*CO2_tot_x/(KK_CO2_tot_x*sqr(P_CO2_tot_x));
    J_H_t = (-J_pdh+2{dimensionless}*J_cits-J_akgd+J_scoas+J_mdh+J_PYRH+J_GLUH+J_CITMAL-J_ASPGLU-5{dimensionless}*J_C1-2{dimensionless}*J_C3-4{dimensionless}*J_C4+(n_A-1{dimensionless})*J_F1+2{dimensionless}*J_PIHt+J_Hle-J_KH)/W_x;
    J_Mg_t = 0{molar_per_second};
    J_K_t = J_KH/W_x;
    phi_H = -(H_x*dH_x_dt/(KH_H_x*P_H_x)+H_x*dATP_x_dt/(KH_ATP_x*P_ATP_x)+H_x*dADP_x_dt/(KH_ADP_x*P_ADP_x)+H_x*dAMP_x_dt/(KH_AMP_x*P_AMP_x)+H_x*dGTP_x_dt/(KH_GTP_x*P_GTP_x)+H_x*dGDP_x_dt/(KH_GDP_x*P_GDP_x)+H_x*dPI_x_dt/(KH_PI_x*P_PI_x)+H_x*dNADH_x_dt/(KH_NADH_x*P_NADH_x)+H_x*dNAD_x_dt/(KH_NAD_x*P_NAD_x)+H_x*dQH2_x_dt/(KH_QH2_x*P_QH2_x)+H_x*dCOQ_x_dt/(KH_COQ_x*P_COQ_x)+H_x*dPYR_x_dt/(KH_PYR_x*P_PYR_x)+H_x*dOAA_x_dt/(KH_OAA_x*P_OAA_x)+H_x*dACCOA_x_dt/(KH_ACCOA_x*P_ACCOA_x)+H_x*dCIT_x_dt/(KH_CIT_x*P_CIT_x)+H_x*dICIT_x_dt/(KH_ICIT_x*P_ICIT_x)+H_x*dAKG_x_dt/(KH_AKG_x*P_AKG_x)+H_x*dSCOA_x_dt/(KH_SCOA_x*P_SCOA_x)+H_x*dCOASH_x_dt/(KH_COASH_x*P_COASH_x)+H_x*dSUC_x_dt/(KH_SUC_x*P_SUC_x)+H_x*dFUM_x_dt/(KH_FUM_x*P_FUM_x)+H_x*dMAL_x_dt/(KH_MAL_x*P_MAL_x)+H_x*dGLU_x_dt/(KH_GLU_x*P_GLU_x)+H_x*dASP_x_dt/(KH_ASP_x*P_ASP_x)+H_x*dK_x_dt/(KH_K_x*P_K_x)+H_x*dMg_x_dt/(KH_Mg_x*P_Mg_x)+H_x*dO2_x_dt/(KH_O2_x*P_O2_x)+H_x*dFADH2_x_dt/(KH_FADH2_x*P_FADH2_x)+H_x*dFAD_x_dt/(KH_FAD_x*P_FAD_x)+H_x*dCO2_tot_x_dt/(KH_CO2_tot_x*P_CO2_tot_x))+J_H_t;
    phi_Mg = -(Mg_x*dH_x_dt/(KMg_H_x*P_H_x)+Mg_x*dATP_x_dt/(KMg_ATP_x*P_ATP_x)+Mg_x*dADP_x_dt/(KMg_ADP_x*P_ADP_x)+Mg_x*dAMP_x_dt/(KMg_AMP_x*P_AMP_x)+Mg_x*dGTP_x_dt/(KMg_GTP_x*P_GTP_x)+Mg_x*dGDP_x_dt/(KMg_GDP_x*P_GDP_x)+Mg_x*dPI_x_dt/(KMg_PI_x*P_PI_x)+Mg_x*dNADH_x_dt/(KMg_NADH_x*P_NADH_x)+Mg_x*dNAD_x_dt/(KMg_NAD_x*P_NAD_x)+Mg_x*dQH2_x_dt/(KMg_QH2_x*P_QH2_x)+Mg_x*dCOQ_x_dt/(KMg_COQ_x*P_COQ_x)+Mg_x*dPYR_x_dt/(KMg_PYR_x*P_PYR_x)+Mg_x*dOAA_x_dt/(KMg_OAA_x*P_OAA_x)+Mg_x*dACCOA_x_dt/(KMg_ACCOA_x*P_ACCOA_x)+Mg_x*dCIT_x_dt/(KMg_CIT_x*P_CIT_x)+Mg_x*dICIT_x_dt/(KMg_ICIT_x*P_ICIT_x)+Mg_x*dAKG_x_dt/(KMg_AKG_x*P_AKG_x)+Mg_x*dSCOA_x_dt/(KMg_SCOA_x*P_SCOA_x)+Mg_x*dCOASH_x_dt/(KMg_COASH_x*P_COASH_x)+Mg_x*dSUC_x_dt/(KMg_SUC_x*P_SUC_x)+Mg_x*dFUM_x_dt/(KMg_FUM_x*P_FUM_x)+Mg_x*dMAL_x_dt/(KMg_MAL_x*P_MAL_x)+Mg_x*dGLU_x_dt/(KMg_GLU_x*P_GLU_x)+Mg_x*dASP_x_dt/(KMg_ASP_x*P_ASP_x)+Mg_x*dK_x_dt/(KMg_K_x*P_K_x)+Mg_x*dMg_x_dt/(KMg_Mg_x*P_Mg_x)+Mg_x*dO2_x_dt/(KMg_O2_x*P_O2_x)+Mg_x*dFADH2_x_dt/(KMg_FADH2_x*P_FADH2_x)+Mg_x*dFAD_x_dt/(KMg_FAD_x*P_FAD_x)+Mg_x*dCO2_tot_x_dt/(KMg_CO2_tot_x*P_CO2_tot_x))+J_Mg_t;
    phi_K = -(K_x*dH_x_dt/(KK_H_x*P_H_x)+K_x*dATP_x_dt/(KK_ATP_x*P_ATP_x)+K_x*dADP_x_dt/(KK_ADP_x*P_ADP_x)+K_x*dAMP_x_dt/(KK_AMP_x*P_AMP_x)+K_x*dGTP_x_dt/(KK_GTP_x*P_GTP_x)+K_x*dGDP_x_dt/(KK_GDP_x*P_GDP_x)+K_x*dPI_x_dt/(KK_PI_x*P_PI_x)+K_x*dNADH_x_dt/(KK_NADH_x*P_NADH_x)+K_x*dNAD_x_dt/(KK_NAD_x*P_NAD_x)+K_x*dQH2_x_dt/(KK_QH2_x*P_QH2_x)+K_x*dCOQ_x_dt/(KK_COQ_x*P_COQ_x)+K_x*dPYR_x_dt/(KK_PYR_x*P_PYR_x)+K_x*dOAA_x_dt/(KK_OAA_x*P_OAA_x)+K_x*dACCOA_x_dt/(KK_ACCOA_x*P_ACCOA_x)+K_x*dCIT_x_dt/(KK_CIT_x*P_CIT_x)+K_x*dICIT_x_dt/(KK_ICIT_x*P_ICIT_x)+K_x*dAKG_x_dt/(KK_AKG_x*P_AKG_x)+K_x*dSCOA_x_dt/(KK_SCOA_x*P_SCOA_x)+K_x*dCOASH_x_dt/(KK_COASH_x*P_COASH_x)+K_x*dSUC_x_dt/(KK_SUC_x*P_SUC_x)+K_x*dFUM_x_dt/(KK_FUM_x*P_FUM_x)+K_x*dMAL_x_dt/(KK_MAL_x*P_MAL_x)+K_x*dGLU_x_dt/(KK_GLU_x*P_GLU_x)+K_x*dASP_x_dt/(KK_ASP_x*P_ASP_x)+K_x*dK_x_dt/(KK_K_x*P_K_x)+K_x*dMg_x_dt/(KK_Mg_x*P_Mg_x)+K_x*dO2_x_dt/(KK_O2_x*P_O2_x)+K_x*dFADH2_x_dt/(KK_FADH2_x*P_FADH2_x)+K_x*dFAD_x_dt/(KK_FAD_x*P_FAD_x)+K_x*dCO2_tot_x_dt/(KK_CO2_tot_x*P_CO2_tot_x))+J_K_t;
    alpha_H = 1{dimensionless}+dHB_dH+B_x/(K_BX*sqr(1{dimensionless}+H_x/K_BX));
    alpha_Mg = 1{dimensionless}+dMgB_dMg;
    alpha_K = 1{dimensionless}+dKB_dK;
    D = alpha_H*dKB_dMg*dMgB_dK+alpha_K*dHB_dMg*dMgB_dH+alpha_Mg*dHB_dK*dKB_dH-alpha_Mg*alpha_K*alpha_H-dHB_dK*dKB_dMg*dMgB_dH-dHB_dMg*dMgB_dK*dKB_dH;
  enddef;
  def map between Environment and parameters for
    vars ExpType and ExpType;
    vars StateType and StateType;
  enddef;
  def map between Environment and thermodynamic_data for
    vars ExpType and ExpType;
  enddef;
  def map between Environment and J_CKc for
    vars ExpType and ExpType;
  enddef;
  def map between Environment and J_AK for
    vars ExpType and ExpType;
  enddef;
  def map between Environment and ddPsi_dt for
    vars time and time;
  enddef;
  def map between Environment and dATP_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dADP_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dAMP_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dGTP_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dGDP_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dPI_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dNADH_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dQH2_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dPYR_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dACCOA_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dCIT_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dICIT_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dAKG_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dSCOA_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dCOASH_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dSUC_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dFUM_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dMAL_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dOAA_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dGLU_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dASP_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dO2_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dCO2_tot_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dCred_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dATP_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dADP_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dAMP_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dPI_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dPYR_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dCIT_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dICIT_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dAKG_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dSUC_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dFUM_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dMAL_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dGLU_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dASP_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dPYR_c_dt for
    vars time and time;
    vars ExpType and ExpType;
    vars StateType and StateType;
  enddef;
  def map between Environment and dCIT_c_dt for
    vars time and time;
    vars ExpType and ExpType;
    vars StateType and StateType;
  enddef;
  def map between Environment and dICIT_c_dt for
    vars time and time;
    vars ExpType and ExpType;
    vars StateType and StateType;
  enddef;
  def map between Environment and dAKG_c_dt for
    vars time and time;
    vars ExpType and ExpType;
    vars StateType and StateType;
  enddef;
  def map between Environment and dSUC_c_dt for
    vars time and time;
    vars ExpType and ExpType;
    vars StateType and StateType;
  enddef;
  def map between Environment and dFUM_c_dt for
    vars time and time;
    vars ExpType and ExpType;
    vars StateType and StateType;
  enddef;
  def map between Environment and dMAL_c_dt for
    vars time and time;
    vars ExpType and ExpType;
    vars StateType and StateType;
  enddef;
  def map between Environment and dGLU_c_dt for
    vars time and time;
    vars ExpType and ExpType;
  enddef;
  def map between Environment and dASP_c_dt for
    vars time and time;
    vars ExpType and ExpType;
  enddef;
  def map between Environment and dH_c_dt for
    vars time and time;
  enddef;
  def map between Environment and dMg_c_dt for
    vars time and time;
  enddef;
  def map between Environment and dK_c_dt for
    vars time and time;
  enddef;
  def map between Environment and dPI_c_dt for
    vars time and time;
    vars ExpType and ExpType;
  enddef;
  def map between Environment and dATP_c_dt for
    vars time and time;
    vars ExpType and ExpType;
  enddef;
  def map between Environment and dADP_c_dt for
    vars time and time;
    vars ExpType and ExpType;
  enddef;
  def map between Environment and dGLC_c_dt for
    vars time and time;
    vars ExpType and ExpType;
  enddef;
  def map between Environment and dG6P_c_dt for
    vars time and time;
    vars ExpType and ExpType;
  enddef;
  def map between Environment and dPCr_c_dt for
    vars time and time;
    vars ExpType and ExpType;
  enddef;
  def map between Environment and dAMP_c_dt for
    vars time and time;
    vars ExpType and ExpType;
  enddef;
  def map between Environment and dH_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dMg_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dK_x_dt for
    vars time and time;
  enddef;
  def map between parameters and J_PYRt for
    vars p_TI and p_TI;
    vars gamma and gamma;
  enddef;
  def map between parameters and J_CITt for
    vars p_TI and p_TI;
    vars gamma and gamma;
  enddef;
  def map between parameters and J_MALt for
    vars p_TI and p_TI;
    vars gamma and gamma;
  enddef;
  def map between parameters and J_AKGt for
    vars p_TI and p_TI;
    vars gamma and gamma;
  enddef;
  def map between parameters and J_SUCt for
    vars p_TI and p_TI;
    vars gamma and gamma;
  enddef;
  def map between parameters and J_GLUt for
    vars p_TI and p_TI;
    vars gamma and gamma;
  enddef;
  def map between parameters and J_ASPt for
    vars p_TI and p_TI;
    vars gamma and gamma;
  enddef;
  def map between parameters and J_FUMt for
    vars gamma and gamma;
  enddef;
  def map between parameters and J_ICITt for
    vars p_TI and p_TI;
    vars gamma and gamma;
  enddef;
  def map between parameters and J_ADPt for
    vars p_A and p_A;
    vars gamma and gamma;
  enddef;
  def map between parameters and J_ATPt for
    vars p_A and p_A;
    vars gamma and gamma;
  enddef;
  def map between parameters and J_AMPt for
    vars p_A and p_A;
    vars gamma and gamma;
  enddef;
  def map between parameters and J_PIt for
    vars p_PI and p_PI;
    vars gamma and gamma;
  enddef;
  def map between parameters and J_ASPGLU for
    vars F and F;
    vars X_ASPGLU and X_ASPGLU;
  enddef;
  def map between parameters and J_C1 for
    vars F and F;
    vars X_C1 and X_C1;
  enddef;
  def map between parameters and J_C3 for
    vars F and F;
    vars X_C3 and X_C3;
    vars k_PI_1 and k_PI_1;
    vars k_PI_2 and k_PI_2;
  enddef;
  def map between parameters and J_C4 for
    vars F and F;
    vars X_C4 and X_C4;
    vars k_O2 and k_O2;
    vars cytC_tot and cytC_tot;
  enddef;
  def map between parameters and J_F1 for
    vars F and F;
    vars X_F1 and X_F1;
    vars n_A and n_A;
  enddef;
  def map between parameters and J_ANT for
    vars F and F;
    vars X_ANT and X_ANT;
    vars theta and theta;
    vars k_mADP and k_mADP;
  enddef;
  def map between parameters and J_Hle for
    vars F and F;
    vars n_A and n_A;
    vars X_Hle and X_Hle;
  enddef;
  def map between parameters and J_pdh for
    vars X_pdh and V_mf;
  enddef;
  def map between parameters and J_cits for
    vars X_cits and V_mf;
  enddef;
  def map between parameters and J_acon for
    vars X_acon and V_mf;
  enddef;
  def map between parameters and J_isod for
    vars X_isod and V_mf;
  enddef;
  def map between parameters and J_akgd for
    vars X_akgd and V_mf;
  enddef;
  def map between parameters and J_scoas for
    vars X_scoas and V_mf;
  enddef;
  def map between parameters and J_sdh for
    vars X_sdh and V_mf;
  enddef;
  def map between parameters and J_fum for
    vars X_fum and V_mf;
  enddef;
  def map between parameters and J_mdh for
    vars X_mdh and V_mf;
  enddef;
  def map between parameters and J_ndk for
    vars X_ndk and V_mf;
  enddef;
  def map between parameters and J_got for
    vars X_got and V_mf;
  enddef;
  def map between parameters and J_PYRH for
    vars X_PYRH and X_PYRH;
  enddef;
  def map between parameters and J_GLUH for
    vars X_GLUH and X_GLUH;
  enddef;
  def map between parameters and J_CITMAL for
    vars X_CITMAL and X_CITMAL;
  enddef;
  def map between parameters and J_AKGMAL for
    vars X_AKGMAL and X_AKGMAL;
  enddef;
  def map between parameters and J_MALPI for
    vars X_MALPI and X_MALPI;
  enddef;
  def map between parameters and J_SUCMAL for
    vars X_SUCMAL and X_SUCMAL;
  enddef;
  def map between parameters and J_PIHt for
    vars X_PiHt and X_PIHt;
    vars k_PiHt and k_PIHt;
  enddef;
  def map between parameters and J_KH for
    vars X_KH and X_KH;
  enddef;
  def map between parameters and J_HK for
    vars X_HK and X_HK;
  enddef;
  def map between parameters and J_CKc for
    vars CR_tot and CR_tot;
  enddef;
  def map between thermodynamic_data and J_pdh for
    vars RT and RT;
    vars dGf1_CO2_tot and dGf1_CO2_tot;
    vars dGf1_ACCOA and dGf1_ACCOA;
    vars dGf1_NADH and dGf1_NADH;
    vars dGf1_PYR and dGf1_PYR;
    vars dGf1_COASH and dGf1_COASH;
    vars dGf1_NAD and dGf1_NAD;
    vars dGf1_H2O and dGf1_H2O;
  enddef;
  def map between thermodynamic_data and J_cits for
    vars RT and RT;
    vars dGf1_ACCOA and dGf1_ACCOA;
    vars dGf1_COASH and dGf1_COASH;
    vars dGf1_CIT and dGf1_CIT;
    vars dGf1_OAA and dGf1_OAA;
    vars dGf1_H2O and dGf1_H2O;
  enddef;
  def map between thermodynamic_data and J_acon for
    vars RT and RT;
    vars dGf1_ICIT and dGf1_ICIT;
    vars dGf1_CIT and dGf1_CIT;
  enddef;
  def map between thermodynamic_data and J_isod for
    vars RT and RT;
    vars dGf1_AKG and dGf1_AKG;
    vars dGf1_NADH and dGf1_NADH;
    vars dGf1_CO2_tot and dGf1_CO2_tot;
    vars dGf1_ICIT and dGf1_ICIT;
    vars dGf1_NAD and dGf1_NAD;
    vars dGf1_H2O and dGf1_H2O;
  enddef;
  def map between thermodynamic_data and J_akgd for
    vars RT and RT;
    vars dGf1_CO2_tot and dGf1_CO2_tot;
    vars dGf1_SCOA and dGf1_SCOA;
    vars dGf1_NADH and dGf1_NADH;
    vars dGf1_AKG and dGf1_AKG;
    vars dGf1_COASH and dGf1_COASH;
    vars dGf1_NAD and dGf1_NAD;
    vars dGf1_H2O and dGf1_H2O;
  enddef;
  def map between thermodynamic_data and J_scoas for
    vars RT and RT;
    vars dGf1_COASH and dGf1_COASH;
    vars dGf1_SUC and dGf1_SUC;
    vars dGf1_GTP and dGf1_GTP;
    vars dGf1_GDP and dGf1_GDP;
    vars dGf1_SCOA and dGf1_SCOA;
    vars dGf1_Pi and dGf1_Pi;
  enddef;
  def map between thermodynamic_data and J_sdh for
    vars RT and RT;
    vars dGf1_QH2 and dGf1_QH2;
    vars dGf1_FUM and dGf1_FUM;
    vars dGf1_SUC and dGf1_SUC;
    vars dGf1_COQ and dGf1_COQ;
  enddef;
  def map between thermodynamic_data and J_fum for
    vars RT and RT;
    vars dGf1_MAL and dGf1_MAL;
    vars dGf1_FUM and dGf1_FUM;
    vars dGf1_H2O and dGf1_H2O;
  enddef;
  def map between thermodynamic_data and J_mdh for
    vars RT and RT;
    vars dGf1_OAA and dGf1_OAA;
    vars dGf1_NADH and dGf1_NADH;
    vars dGf1_NAD and dGf1_NAD;
    vars dGf1_MAL and dGf1_MAL;
  enddef;
  def map between thermodynamic_data and J_ndk for
    vars RT and RT;
    vars dGf1_GDP and dGf1_GDP;
    vars dGf1_ATP and dGf1_ATP;
    vars dGf1_GTP and dGf1_GTP;
    vars dGf1_ADP and dGf1_ADP;
  enddef;
  def map between thermodynamic_data and J_got for
    vars RT and RT;
    vars dGf1_OAA and dGf1_OAA;
    vars dGf1_GLU and dGf1_GLU;
    vars dGf1_ASP and dGf1_ASP;
    vars dGf1_AKG and dGf1_AKG;
  enddef;
  def map between thermodynamic_data and J_ASPGLU for
    vars RT and RT;
  enddef;
  def map between thermodynamic_data and J_C1 for
    vars RT and RT;
    vars dGf1_NAD and dGf1_NAD;
    vars dGf1_QH2 and dGf1_QH2;
    vars dGf1_NADH and dGf1_NADH;
    vars dGf1_COQ and dGf1_COQ;
  enddef;
  def map between thermodynamic_data and J_C3 for
    vars RT and RT;
    vars dGf1_COQ and dGf1_COQ;
    vars dGf1_Cred and dGf1_Cred;
    vars dGf1_QH2 and dGf1_QH2;
    vars dGf1_Cox and dGf1_Cox;
  enddef;
  def map between thermodynamic_data and J_C4 for
    vars RT and RT;
    vars dGf1_Cox and dGf1_Cox;
    vars dGf1_H2O and dGf1_H2O;
    vars dGf1_Cred and dGf1_Cred;
    vars dGf1_O2 and dGf1_O2;
  enddef;
  def map between thermodynamic_data and J_F1 for
    vars RT and RT;
    vars dGf1_ATP and dGf1_ATP;
    vars dGf1_H2O and dGf1_H2O;
    vars dGf1_ADP and dGf1_ADP;
    vars dGf1_Pi and dGf1_PI;
  enddef;
  def map between thermodynamic_data and J_ANT for
    vars RT and RT;
  enddef;
  def map between thermodynamic_data and J_Hle for
    vars RT and RT;
  enddef;
  def map between thermodynamic_data and J_HK for
    vars RT and RT;
    vars dGf1_G6P and dGf1_G6P;
    vars dGf1_ADP and dGf1_ADP;
    vars dGf1_GLC and dGf1_GLC;
    vars dGf1_ATP and dGf1_ATP;
  enddef;
  def map between thermodynamic_data and J_CKc for
    vars RT and RT;
  enddef;
  def map between thermodynamic_data and J_AK for
    vars RT and RT;
    vars dGf1_ATP and dGf1_ATP;
    vars dGf1_ADP and dGf1_ADP;
    vars dGf1_AMP and dGf1_AMP;
  enddef;
  def map between P_ATP and P_GTP for
    vars K_H and K_H_ATP;
    vars K_Mg and K_Mg_ATP;
    vars K_K and K_K_ATP;
    vars P_ATP_x and P_ATP_x;
    vars P_ATP_i and P_ATP_i;
    vars P_ATP_c and P_ATP_c;
  enddef;
  def map between P_ADP and P_GDP for
    vars K_H and K_H_ADP;
    vars K_Mg and K_Mg_ADP;
    vars K_K and K_K_ADP;
    vars P_ADP_x and P_ADP_x;
    vars P_ADP_i and P_ADP_i;
    vars P_ADP_c and P_ADP_c;
  enddef;
  def map between P_CO2_tot and J_pdh for
    vars P_CO2_tot_x and P_CO2_tot_x;
  enddef;
  def map between P_ACCOA and J_pdh for
    vars P_ACCOA_x and P_ACCOA_x;
  enddef;
  def map between P_NADH and J_pdh for
    vars P_NADH_x and P_NADH_x;
  enddef;
  def map between P_PYR and J_pdh for
    vars P_PYR_x and P_PYR_x;
  enddef;
  def map between P_COASH and J_pdh for
    vars P_COASH_x and P_COASH_x;
  enddef;
  def map between P_NAD and J_pdh for
    vars P_NAD_x and P_NAD_x;
  enddef;
  def map between P_ATP and J_cits for
    vars uATP_x and uATP_x;
  enddef;
  def map between P_ADP and J_cits for
    vars uADP_x and uADP_x;
  enddef;
  def map between P_AMP and J_cits for
    vars uAMP_x and uAMP_x;
  enddef;
  def map between P_CIT and J_cits for
    vars uCIT_x and uCIT_x;
    vars P_CIT_x and P_CIT_x;
  enddef;
  def map between P_COASH and J_cits for
    vars P_COASH_x and P_COASH_x;
  enddef;
  def map between P_ACCOA and J_cits for
    vars P_ACCOA_x and P_ACCOA_x;
  enddef;
  def map between P_OAA and J_cits for
    vars P_OAA_x and P_OAA_x;
  enddef;
  def map between P_CIT and J_acon for
    vars P_CIT_x and P_CIT_x;
  enddef;
  def map between P_ICIT and J_acon for
    vars P_ICIT_x and P_ICIT_x;
  enddef;
  def map between P_CO2_tot and J_isod for
    vars P_CO2_tot_x and P_CO2_tot_x;
  enddef;
  def map between P_AKG and J_isod for
    vars P_AKG_x and P_AKG_x;
  enddef;
  def map between P_NADH and J_isod for
    vars P_NADH_x and P_NADH_x;
  enddef;
  def map between P_NAD and J_isod for
    vars P_NAD_x and P_NAD_x;
  enddef;
  def map between P_ICIT and J_isod for
    vars P_ICIT_x and P_ICIT_x;
  enddef;
  def map between P_ATP and J_isod for
    vars uATP_x and fATP_x;
  enddef;
  def map between P_ADP and J_isod for
    vars uADP_x and fADP_x;
  enddef;
  def map between P_ATP and J_akgd for
    vars uATP_x and fATP_x;
  enddef;
  def map between P_ADP and J_akgd for
    vars uADP_x and fADP_x;
  enddef;
  def map between P_CO2_tot and J_akgd for
    vars P_CO2_tot_x and P_CO2_tot_x;
  enddef;
  def map between P_SCOA and J_akgd for
    vars P_SCOA_x and P_SCOA_x;
  enddef;
  def map between P_NADH and J_akgd for
    vars P_NADH_x and P_NADH_x;
  enddef;
  def map between P_AKG and J_akgd for
    vars P_AKG_x and P_AKG_x;
  enddef;
  def map between P_COASH and J_akgd for
    vars P_COASH_x and P_COASH_x;
  enddef;
  def map between P_NAD and J_akgd for
    vars P_NAD_x and P_NAD_x;
  enddef;
  def map between P_COASH and J_scoas for
    vars P_COASH_x and P_COASH_x;
  enddef;
  def map between P_SUC and J_scoas for
    vars P_SUC_x and P_SUC_x;
  enddef;
  def map between P_GTP and J_scoas for
    vars P_GTP_x and P_GTP_x;
  enddef;
  def map between P_GDP and J_scoas for
    vars P_GDP_x and P_GDP_x;
  enddef;
  def map between P_SCOA and J_scoas for
    vars P_SCOA_x and P_SCOA_x;
  enddef;
  def map between P_PI and J_scoas for
    vars P_PI_x and P_PI_x;
  enddef;
  def map between P_FUM and J_sdh for
    vars P_FUM_x and P_FUM_x;
  enddef;
  def map between P_QH2 and J_sdh for
    vars P_QH2_x and P_QH2_x;
  enddef;
  def map between P_COQ and J_sdh for
    vars P_COQ_x and P_COQ_x;
  enddef;
  def map between P_SUC and J_sdh for
    vars P_SUC_x and P_SUC_x;
  enddef;
  def map between P_MAL and J_fum for
    vars P_MAL_x and P_MAL_x;
  enddef;
  def map between P_FUM and J_fum for
    vars P_FUM_x and P_FUM_x;
  enddef;
  def map between P_ATP and J_fum for
    vars uATP_x and fATP_x;
  enddef;
  def map between P_ADP and J_fum for
    vars uADP_x and fADP_x;
  enddef;
  def map between P_GTP and J_fum for
    vars uGTP_x and fGTP_x;
  enddef;
  def map between P_GDP and J_fum for
    vars uGDP_x and fGDP_x;
  enddef;
  def map between P_MAL and J_mdh for
    vars P_MAL_x and P_MAL_x;
  enddef;
  def map between P_OAA and J_mdh for
    vars P_OAA_x and P_OAA_x;
  enddef;
  def map between P_NAD and J_mdh for
    vars P_NAD_x and P_NAD_x;
  enddef;
  def map between P_NADH and J_mdh for
    vars P_NADH_x and P_NADH_x;
  enddef;
  def map between P_ATP and J_mdh for
    vars uATP_x and fATP_x;
  enddef;
  def map between P_ADP and J_mdh for
    vars uADP_x and fADP_x;
  enddef;
  def map between P_AMP and J_mdh for
    vars uAMP_x and fAMP_x;
  enddef;
  def map between P_ATP and J_ndk for
    vars P_ATP_x and P_ATP_x;
  enddef;
  def map between P_GTP and J_ndk for
    vars P_GTP_x and P_GTP_x;
  enddef;
  def map between P_ADP and J_ndk for
    vars P_ADP_x and P_ADP_x;
  enddef;
  def map between P_GDP and J_ndk for
    vars P_GDP_x and P_GDP_x;
  enddef;
  def map between P_AMP and J_ndk for
    vars uAMP_x and fAMP_x;
  enddef;
  def map between P_OAA and J_got for
    vars P_OAA_x and P_OAA_x;
  enddef;
  def map between P_ASP and J_got for
    vars P_ASP_x and P_ASP_x;
  enddef;
  def map between P_GLU and J_got for
    vars P_GLU_x and P_GLU_x;
  enddef;
  def map between P_AKG and J_got for
    vars P_AKG_x and P_AKG_x;
  enddef;
  def map between P_PYR and J_PYRH for
    vars P_PYR_x and P_PYR_x;
    vars P_PYR_i and P_PYR_i;
  enddef;
  def map between P_GLU and J_GLUH for
    vars P_GLU_x and P_GLU_x;
    vars P_GLU_i and P_GLU_i;
  enddef;
  def map between P_MAL and J_CITMAL for
    vars P_MAL_x and P_MAL_x;
    vars P_MAL_i and P_MAL_i;
  enddef;
  def map between P_CIT and J_CITMAL for
    vars hCIT_x and hCIT_x;
    vars hCIT_i and hCIT_i;
  enddef;
  def map between P_MAL and J_MALPI for
    vars P_MAL_x and P_MAL_x;
    vars P_MAL_i and P_MAL_i;
  enddef;
  def map between P_PI and J_MALPI for
    vars P_PI_x and P_PI_x;
    vars P_PI_i and P_PI_i;
  enddef;
  def map between P_GLU and J_ASPGLU for
    vars P_GLU_x and P_GLU_x;
    vars P_GLU_i and P_GLU_i;
  enddef;
  def map between P_ASP and J_ASPGLU for
    vars P_ASP_x and P_ASP_x;
    vars P_ASP_i and P_ASP_i;
  enddef;
  def map between P_MAL and J_SUCMAL for
    vars P_MAL_x and P_MAL_x;
    vars P_MAL_i and P_MAL_i;
  enddef;
  def map between P_SUC and J_SUCMAL for
    vars P_SUC_x and P_SUC_x;
    vars P_SUC_i and P_SUC_i;
  enddef;
  def map between P_ATP and J_F1 for
    vars P_ATP_x and P_ATP_x;
  enddef;
  def map between P_ADP and J_F1 for
    vars P_ADP_x and P_ADP_x;
  enddef;
  def map between P_PI and J_F1 for
    vars P_PI_x and P_PI_x;
  enddef;
  def map between P_ATP and J_ANT for
    vars P_ATP_x and P_ATP_x;
    vars P_ATP_i and P_ATP_i;
  enddef;
  def map between P_ADP and J_ANT for
    vars P_ADP_x and P_ADP_x;
    vars P_ADP_i and P_ADP_i;
  enddef;
  def map between P_PI and J_PIHt for
    vars hPI_x and hPI_x;
    vars hPI_i and hPI_i;
  enddef;
  def map between P_ATP and J_HK for
    vars P_ATP_c and P_ATP_c;
    vars K_Mg and KMg_ATP;
    vars mATP_c and mATP_c;
  enddef;
  def map between P_ADP and J_HK for
    vars P_ADP_c and P_ADP_c;
    vars K_Mg and KMg_ADP;
    vars mADP_c and mADP_c;
  enddef;
  def map between P_GLC and J_HK for
    vars P_GLC_c and P_GLC_c;
  enddef;
  def map between P_G6P and J_HK for
    vars P_G6P_c and P_G6P_c;
  enddef;
  def map between P_ATP and J_CKc for
    vars P_ATP_c and P_ATP_c;
  enddef;
  def map between P_ADP and J_CKc for
    vars P_ADP_c and P_ADP_c;
  enddef;
  def map between P_ATP and J_AK for
    vars P_ATP_i and P_ATP_i;
    vars P_ATP_c and P_ATP_c;
  enddef;
  def map between P_ADP and J_AK for
    vars P_ADP_i and P_ADP_i;
    vars P_ADP_c and P_ADP_c;
  enddef;
  def map between P_AMP and J_AK for
    vars P_AMP_i and P_AMP_i;
    vars P_AMP_c and P_AMP_c;
  enddef;
  def map between ddPsi_dt and J_ASPGLU for
    vars dPsi and dPsi;
    vars J_ASPGLU and J_ASPGLU;
  enddef;
  def map between ddPsi_dt and J_C1 for
    vars dPsi and dPsi;
    vars J_C1 and J_C1;
  enddef;
  def map between ddPsi_dt and J_C3 for
    vars dPsi and dPsi;
    vars J_C3 and J_C3;
  enddef;
  def map between ddPsi_dt and J_C4 for
    vars dPsi and dPsi;
    vars J_C4 and J_C4;
  enddef;
  def map between ddPsi_dt and J_F1 for
    vars dPsi and dPsi;
    vars J_F1 and J_F1;
  enddef;
  def map between ddPsi_dt and J_ANT for
    vars dPsi and dPsi;
    vars J_ANT and J_ANT;
  enddef;
  def map between ddPsi_dt and J_Hle for
    vars dPsi and dPsi;
    vars J_Hle and J_Hle;
  enddef;
  def map between dNAD_x_dt and J_pdh for
    vars NAD_x and NAD_x;
  enddef;
  def map between dNAD_x_dt and J_isod for
    vars NAD_x and NAD_x;
  enddef;
  def map between dNAD_x_dt and J_akgd for
    vars NAD_x and NAD_x;
  enddef;
  def map between dNAD_x_dt and J_mdh for
    vars NAD_x and NAD_x;
  enddef;
  def map between dNAD_x_dt and J_C1 for
    vars NAD_x and NAD_x;
  enddef;
  def map between dCOQ_x_dt and J_sdh for
    vars COQ_x and COQ_x;
  enddef;
  def map between dCOQ_x_dt and J_C1 for
    vars COQ_x and COQ_x;
  enddef;
  def map between dCOQ_x_dt and J_C3 for
    vars COQ_x and COQ_x_in;
  enddef;
  def map between dCox_i_dt and J_C3 for
    vars Cox_i and Cox_i;
  enddef;
  def map between dCox_i_dt and J_C4 for
    vars Cox_i and Cox_i;
  enddef;
  def map between dATP_x_dt and P_ATP for
    vars ATP_x and ATP_x;
  enddef;
  def map between dATP_x_dt and J_ndk for
    vars ATP_x and ATP_x;
    vars J_ndk and J_ndk;
  enddef;
  def map between dATP_x_dt and J_cits for
    vars ATP_x and ATP_x;
  enddef;
  def map between dATP_x_dt and J_F1 for
    vars ATP_x and ATP_x;
    vars J_F1 and J_F1;
  enddef;
  def map between dATP_x_dt and J_ANT for
    vars ATP_x and ATP_x;
    vars J_ANT and J_ANT;
  enddef;
  def map between dADP_x_dt and P_ADP for
    vars ADP_x and ADP_x;
  enddef;
  def map between dADP_x_dt and J_ndk for
    vars ADP_x and ADP_x;
    vars J_ndk and J_ndk;
  enddef;
  def map between dADP_x_dt and J_cits for
    vars ADP_x and ADP_x;
  enddef;
  def map between dADP_x_dt and J_F1 for
    vars ADP_x and ADP_x;
    vars J_F1 and J_F1;
  enddef;
  def map between dADP_x_dt and J_ANT for
    vars ADP_x and ADP_x;
    vars J_ANT and J_ANT;
  enddef;
  def map between dAMP_x_dt and P_AMP for
    vars AMP_x and AMP_x;
  enddef;
  def map between dAMP_x_dt and J_cits for
    vars AMP_x and AMP_x;
  enddef;
  def map between dGTP_x_dt and P_GTP for
    vars GTP_x and GTP_x;
  enddef;
  def map between dGTP_x_dt and J_scoas for
    vars GTP_x and GTP_x;
    vars J_scoas and J_scoas;
  enddef;
  def map between dGTP_x_dt and J_ndk for
    vars GTP_x and GTP_x;
    vars J_ndk and J_ndk;
  enddef;
  def map between dGDP_x_dt and P_GDP for
    vars GDP_x and GDP_x;
  enddef;
  def map between dGDP_x_dt and J_scoas for
    vars GDP_x and GDP_x;
    vars J_scoas and J_scoas;
  enddef;
  def map between dGDP_x_dt and J_ndk for
    vars GDP_x and GDP_x;
    vars J_ndk and J_ndk;
  enddef;
  def map between dPI_x_dt and P_PI for
    vars PI_x and PI_x;
  enddef;
  def map between dPI_x_dt and J_scoas for
    vars PI_x and PI_x;
    vars J_scoas and J_scoas;
  enddef;
  def map between dPI_x_dt and J_MALPI for
    vars PI_x and PI_x;
    vars J_MALPI and J_MALPI;
  enddef;
  def map between dPI_x_dt and J_C3 for
    vars PI_x and PI_x;
  enddef;
  def map between dPI_x_dt and J_F1 for
    vars PI_x and PI_x;
    vars J_F1 and J_F1;
  enddef;
  def map between dPI_x_dt and J_PIHt for
    vars J_PIHt and J_PIHt;
  enddef;
  def map between dNADH_x_dt and J_pdh for
    vars NADH_x and NADH_x;
    vars J_pdh and J_pdh;
  enddef;
  def map between dNADH_x_dt and J_isod for
    vars NADH_x and NADH_x;
    vars J_isod and J_isod;
  enddef;
  def map between dNADH_x_dt and J_akgd for
    vars NADH_x and NADH_x;
    vars J_akgd and J_akgd;
  enddef;
  def map between dNADH_x_dt and J_mdh for
    vars NADH_x and NADH_x;
    vars J_mdh and J_mdh;
  enddef;
  def map between dNADH_x_dt and J_C1 for
    vars NADH_x and NADH_x;
    vars J_C1 and J_C1;
  enddef;
  def map between dQH2_x_dt and J_sdh for
    vars QH2_x and QH2_x;
    vars J_sdh and J_sdh;
  enddef;
  def map between dQH2_x_dt and dCOQ_x_dt for
    vars QH2_x and QH2_x;
    vars dQH2_x_dt and dQH2_x_dt;
  enddef;
  def map between dQH2_x_dt and J_C1 for
    vars QH2_x and QH2_x;
    vars J_C1 and J_C1;
  enddef;
  def map between dQH2_x_dt and J_C3 for
    vars QH2_x and QH2_x_in;
    vars J_C3 and J_C3;
  enddef;
  def map between dPYR_x_dt and J_pdh for
    vars PYR_x and PYR_x;
    vars J_pdh and J_pdh;
  enddef;
  def map between dPYR_x_dt and J_PYRH for
    vars PYR_x and PYR_x;
    vars J_PYRH and J_PYRH;
  enddef;
  def map between dACCOA_x_dt and J_pdh for
    vars ACCOA_x and ACCOA_x;
    vars J_pdh and J_pdh;
  enddef;
  def map between dACCOA_x_dt and J_cits for
    vars ACCOA_x and ACCOA_x;
    vars J_cits and J_cits;
  enddef;
  def map between dCIT_x_dt and P_CIT for
    vars CIT_x and CIT_x;
  enddef;
  def map between dCIT_x_dt and J_cits for
    vars CIT_x and CIT_x;
    vars J_cits and J_cits;
  enddef;
  def map between dCIT_x_dt and J_acon for
    vars CIT_x and CIT_x;
    vars J_acon and J_acon;
  enddef;
  def map between dCIT_x_dt and J_fum for
    vars CIT_x and CIT_x;
  enddef;
  def map between dCIT_x_dt and J_CITMAL for
    vars J_CITMAL and J_CITMAL;
  enddef;
  def map between dICIT_x_dt and J_acon for
    vars ICIT_x and ICIT_x;
    vars J_acon and J_acon;
  enddef;
  def map between dICIT_x_dt and J_isod for
    vars ICIT_x and ICIT_x;
    vars J_isod and J_isod;
  enddef;
  def map between dAKG_x_dt and J_isod for
    vars AKG_x and AKG_x;
    vars J_isod and J_isod;
  enddef;
  def map between dAKG_x_dt and J_akgd for
    vars AKG_x and AKG_x;
    vars J_akgd and J_akgd;
  enddef;
  def map between dAKG_x_dt and J_got for
    vars AKG_x and AKG_x;
    vars J_got and J_got;
  enddef;
  def map between dAKG_x_dt and J_AKGMAL for
    vars AKG_x and AKG_x;
    vars J_AKGMAL and J_AKGMAL;
  enddef;
  def map between dSCOA_x_dt and J_akgd for
    vars SCOA_x and SCOA_x;
    vars J_akgd and J_akgd;
  enddef;
  def map between dSCOA_x_dt and J_scoas for
    vars SCOA_x and SCOA_x;
    vars J_scoas and J_scoas;
  enddef;
  def map between dSCOA_x_dt and J_cits for
    vars SCOA_x and SCOA_x;
  enddef;
  def map between dCOASH_x_dt and J_pdh for
    vars COASH_x and COASH_x;
    vars J_pdh and J_pdh;
  enddef;
  def map between dCOASH_x_dt and J_cits for
    vars COASH_x and COASH_x;
    vars J_cits and J_cits;
  enddef;
  def map between dCOASH_x_dt and J_akgd for
    vars COASH_x and COASH_x;
    vars J_akgd and J_akgd;
  enddef;
  def map between dCOASH_x_dt and J_scoas for
    vars COASH_x and COASH_x;
    vars J_scoas and J_scoas;
  enddef;
  def map between dSUC_x_dt and J_scoas for
    vars SUC_x and SUC_x;
    vars J_scoas and J_scoas;
  enddef;
  def map between dSUC_x_dt and J_sdh for
    vars SUC_x and SUC_x;
    vars J_sdh and J_sdh;
  enddef;
  def map between dSUC_x_dt and J_SUCMAL for
    vars SUC_x and SUC_x;
    vars J_SUCMAL and J_SUCMAL;
  enddef;
  def map between dFUM_x_dt and J_sdh for
    vars FUM_x and FUM_x;
    vars J_sdh and J_sdh;
  enddef;
  def map between dFUM_x_dt and J_fum for
    vars FUM_x and FUM_x;
    vars J_fum and J_fum;
  enddef;
  def map between dMAL_x_dt and J_fum for
    vars MAL_x and MAL_x;
    vars J_fum and J_fum;
  enddef;
  def map between dMAL_x_dt and J_mdh for
    vars MAL_x and MAL_x;
    vars J_mdh and J_mdh;
  enddef;
  def map between dMAL_x_dt and J_CITMAL for
    vars MAL_x and MAL_x;
    vars J_CITMAL and J_CITMAL;
  enddef;
  def map between dMAL_x_dt and J_AKGMAL for
    vars MAL_x and MAL_x;
    vars J_AKGMAL and J_AKGMAL;
  enddef;
  def map between dMAL_x_dt and J_MALPI for
    vars MAL_x and MAL_x;
    vars J_MALPI and J_MALPI;
  enddef;
  def map between dMAL_x_dt and J_SUCMAL for
    vars MAL_x and MAL_x;
    vars J_SUCMAL and J_SUCMAL;
  enddef;
  def map between dOAA_x_dt and J_cits for
    vars OAA_x and OAA_x;
    vars J_cits and J_cits;
  enddef;
  def map between dOAA_x_dt and J_sdh for
    vars OAA_x and OAA_x;
  enddef;
  def map between dOAA_x_dt and J_mdh for
    vars OAA_x and OAA_x;
    vars J_mdh and J_mdh;
  enddef;
  def map between dOAA_x_dt and J_got for
    vars OAA_x and OAA_x;
    vars J_got and J_got;
  enddef;
  def map between dGLU_x_dt and J_got for
    vars GLU_x and GLU_x;
    vars J_got and J_got;
  enddef;
  def map between dGLU_x_dt and J_GLUH for
    vars GLU_x and GLU_x;
    vars J_GLUH and J_GLUH;
  enddef;
  def map between dGLU_x_dt and J_ASPGLU for
    vars GLU_x and GLU_x;
    vars J_ASPGLU and J_ASPGLU;
  enddef;
  def map between dASP_x_dt and J_got for
    vars ASP_x and ASP_x;
    vars J_got and J_got;
  enddef;
  def map between dASP_x_dt and J_ASPGLU for
    vars ASP_x and ASP_x;
    vars J_ASPGLU and J_ASPGLU;
  enddef;
  def map between dO2_x_dt and J_C4 for
    vars O2_x and O2_x_in;
  enddef;
  def map between dCO2_tot_x_dt and J_pdh for
    vars CO2_tot_x and CO2_tot_x;
  enddef;
  def map between dCO2_tot_x_dt and J_isod for
    vars CO2_tot_x and CO2_tot_x;
  enddef;
  def map between dCO2_tot_x_dt and J_akgd for
    vars CO2_tot_x and CO2_tot_x;
  enddef;
  def map between dCred_i_dt and J_C3 for
    vars Cred_i and Cred_i;
    vars J_C3 and J_C3;
  enddef;
  def map between dCred_i_dt and J_C4 for
    vars Cred_i and Cred_i;
    vars J_C4 and J_C4;
  enddef;
  def map between dATP_i_dt and J_ATPt for
    vars ATP_i and ATP_i;
    vars J_ATPt and J_ATPt;
  enddef;
  def map between dATP_i_dt and J_ANT for
    vars ATP_i and ATP_i;
    vars J_ANT and J_ANT;
  enddef;
  def map between dATP_i_dt and J_AK for
    vars ATP_i and ATP_i;
    vars J_AKi and J_AKi;
  enddef;
  def map between dADP_i_dt and J_ADPt for
    vars ADP_i and ADP_i;
    vars J_ADPt and J_ADPt;
  enddef;
  def map between dADP_i_dt and J_ANT for
    vars ADP_i and ADP_i;
    vars J_ANT and J_ANT;
  enddef;
  def map between dADP_i_dt and J_AK for
    vars ADP_i and ADP_i;
    vars J_AKi and J_AKi;
  enddef;
  def map between dAMP_i_dt and J_AMPt for
    vars AMP_i and AMP_i;
    vars J_AMPt and J_AMPt;
  enddef;
  def map between dAMP_i_dt and J_AK for
    vars AMP_i and AMP_i;
    vars J_AKi and J_AKi;
  enddef;
  def map between dPI_i_dt and P_PI for
    vars PI_i and PI_i;
  enddef;
  def map between dPI_i_dt and J_MALPI for
    vars PI_i and PI_i;
    vars J_MALPI and J_MALPI;
  enddef;
  def map between dPI_i_dt and J_PIt for
    vars PI_i and PI_i;
    vars J_PIt and J_PIt;
  enddef;
  def map between dPI_i_dt and J_PIHt for
    vars J_PIHt and J_PIHt;
  enddef;
  def map between dPYR_i_dt and J_PYRH for
    vars PYR_i and PYR_i;
    vars J_PYRH and J_PYRH;
  enddef;
  def map between dPYR_i_dt and J_PYRt for
    vars PYR_i and PYR_i;
    vars J_PYRt and J_PYRt;
  enddef;
  def map between dCIT_i_dt and P_CIT for
    vars CIT_i and CIT_i;
  enddef;
  def map between dCIT_i_dt and J_CITMAL for
    vars J_CITMAL and J_CITMAL;
  enddef;
  def map between dCIT_i_dt and J_CITt for
    vars CIT_i and CIT_i;
    vars J_CITt and J_CITt;
  enddef;
  def map between dICIT_i_dt and J_ICITt for
    vars ICIT_i and ICIT_i;
    vars J_ICITt and J_ICITt;
  enddef;
  def map between dAKG_i_dt and J_AKGMAL for
    vars AKG_i and AKG_i;
    vars J_AKGMAL and J_AKGMAL;
  enddef;
  def map between dAKG_i_dt and J_AKGt for
    vars AKG_i and AKG_i;
    vars J_AKGt and J_AKGt;
  enddef;
  def map between dSUC_i_dt and J_SUCMAL for
    vars SUC_i and SUC_i;
    vars J_SUCMAL and J_SUCMAL;
  enddef;
  def map between dSUC_i_dt and J_SUCt for
    vars SUC_i and SUC_i;
    vars J_SUCt and J_SUCt;
  enddef;
  def map between dFUM_i_dt and J_FUMt for
    vars FUM_i and FUM_i;
    vars J_FUMt and J_FUMt;
  enddef;
  def map between dMAL_i_dt and J_CITMAL for
    vars MAL_i and MAL_i;
    vars J_CITMAL and J_CITMAL;
  enddef;
  def map between dMAL_i_dt and J_AKGMAL for
    vars MAL_i and MAL_i;
    vars J_AKGMAL and J_AKGMAL;
  enddef;
  def map between dMAL_i_dt and J_MALPI for
    vars MAL_i and MAL_i;
    vars J_MALPI and J_MALPI;
  enddef;
  def map between dMAL_i_dt and J_SUCMAL for
    vars MAL_i and MAL_i;
    vars J_SUCMAL and J_SUCMAL;
  enddef;
  def map between dMAL_i_dt and J_MALt for
    vars MAL_i and MAL_i;
    vars J_MALt and J_MALt;
  enddef;
  def map between dGLU_i_dt and J_GLUH for
    vars GLU_i and GLU_i;
    vars J_GLUH and J_GLUH;
  enddef;
  def map between dGLU_i_dt and J_ASPGLU for
    vars GLU_i and GLU_i;
    vars J_ASPGLU and J_ASPGLU;
  enddef;
  def map between dGLU_i_dt and J_GLUt for
    vars GLU_i and GLU_i;
    vars J_GLUt and J_GLUt;
  enddef;
  def map between dASP_i_dt and J_ASPGLU for
    vars ASP_i and ASP_i;
    vars J_ASPGLU and J_ASPGLU;
  enddef;
  def map between dASP_i_dt and J_ASPt for
    vars ASP_i and ASP_i;
    vars J_ASPt and J_ASPt;
  enddef;
  def map between dH_i_dt and P_ATP for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and P_ADP for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and P_AMP for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and P_PI for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and P_COASH for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and P_CIT for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and P_ICIT for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and P_SCOA for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and P_SUC for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and P_FUM for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and P_MAL for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and P_CO2_tot for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and P_G6P for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and P_GLU for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and P_ASP for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and J_PYRH for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and J_GLUH for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and J_ASPGLU for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and J_C1 for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and J_C3 for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and J_C4 for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and J_F1 for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and J_PIHt for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and J_Hle for
    vars H_i and H_i;
  enddef;
  def map between dH_i_dt and J_KH for
    vars H_i and H_i;
  enddef;
  def map between dMg_i_dt and P_ATP for
    vars Mg_i and Mg_i;
  enddef;
  def map between dMg_i_dt and P_ADP for
    vars Mg_i and Mg_i;
  enddef;
  def map between dMg_i_dt and P_AMP for
    vars Mg_i and Mg_i;
  enddef;
  def map between dMg_i_dt and P_PI for
    vars Mg_i and Mg_i;
  enddef;
  def map between dMg_i_dt and P_OAA for
    vars Mg_i and Mg_i;
  enddef;
  def map between dMg_i_dt and P_CIT for
    vars Mg_i and Mg_i;
  enddef;
  def map between dMg_i_dt and P_ICIT for
    vars Mg_i and Mg_i;
  enddef;
  def map between dMg_i_dt and P_SUC for
    vars Mg_i and Mg_i;
  enddef;
  def map between dMg_i_dt and P_MAL for
    vars Mg_i and Mg_i;
  enddef;
  def map between dMg_i_dt and P_PYR for
    vars Mg_i and Mg_i;
  enddef;
  def map between dMg_i_dt and P_GLU for
    vars Mg_i and Mg_i;
  enddef;
  def map between dMg_i_dt and P_ASP for
    vars Mg_i and Mg_i;
  enddef;
  def map between dK_i_dt and P_ATP for
    vars K_i and K_i;
  enddef;
  def map between dK_i_dt and P_ADP for
    vars K_i and K_i;
  enddef;
  def map between dK_i_dt and P_AMP for
    vars K_i and K_i;
  enddef;
  def map between dK_i_dt and P_PI for
    vars K_i and K_i;
  enddef;
  def map between dK_i_dt and P_CIT for
    vars K_i and K_i;
  enddef;
  def map between dK_i_dt and P_SUC for
    vars K_i and K_i;
  enddef;
  def map between dK_i_dt and P_MAL for
    vars K_i and K_i;
  enddef;
  def map between dK_i_dt and J_KH for
    vars K_i and K_i;
  enddef;
  def map between dPYR_c_dt and J_PYRt for
    vars PYR_c and PYR_c;
    vars J_PYRt and J_PYRt;
  enddef;
  def map between dCIT_c_dt and J_CITt for
    vars CIT_c and CIT_c;
    vars J_CITt and J_CITt;
  enddef;
  def map between dICIT_c_dt and J_ICITt for
    vars ICIT_c and ICIT_c;
    vars J_ICITt and J_ICITt;
  enddef;
  def map between dAKG_c_dt and J_AKGt for
    vars AKG_c and AKG_c;
    vars J_AKGt and J_AKGt;
  enddef;
  def map between dSUC_c_dt and J_SUCt for
    vars SUC_c and SUC_c;
    vars J_SUCt and J_SUCt;
  enddef;
  def map between dFUM_c_dt and J_FUMt for
    vars FUM_c and FUM_c;
    vars J_FUMt and J_FUMt;
  enddef;
  def map between dMAL_c_dt and J_MALt for
    vars MAL_c and MAL_c;
    vars J_MALt and J_MALt;
  enddef;
  def map between dGLU_c_dt and J_GLUt for
    vars GLU_c and GLU_c;
    vars J_GLUt and J_GLUt;
  enddef;
  def map between dASP_c_dt and J_ASPt for
    vars ASP_c and ASP_c;
    vars J_ASPt and J_ASPt;
  enddef;
  def map between dH_c_dt and dH_i_dt for
    vars H_c and H_c;
  enddef;
  def map between dMg_c_dt and dMg_i_dt for
    vars Mg_c and Mg_c;
  enddef;
  def map between dK_c_dt and dK_i_dt for
    vars K_c and K_c;
  enddef;
  def map between dH_c_dt and P_ATP for
    vars H_c and H_c;
  enddef;
  def map between dH_c_dt and P_ADP for
    vars H_c and H_c;
  enddef;
  def map between dH_c_dt and P_AMP for
    vars H_c and H_c;
  enddef;
  def map between dH_c_dt and P_PI for
    vars H_c and H_c;
  enddef;
  def map between dH_c_dt and P_COASH for
    vars H_c and H_c;
  enddef;
  def map between dH_c_dt and P_CIT for
    vars H_c and H_c;
  enddef;
  def map between dH_c_dt and P_ICIT for
    vars H_c and H_c;
  enddef;
  def map between dH_c_dt and P_SCOA for
    vars H_c and H_c;
  enddef;
  def map between dH_c_dt and P_SUC for
    vars H_c and H_c;
  enddef;
  def map between dH_c_dt and P_FUM for
    vars H_c and H_c;
  enddef;
  def map between dH_c_dt and P_MAL for
    vars H_c and H_c;
  enddef;
  def map between dH_c_dt and P_CO2_tot for
    vars H_c and H_c;
  enddef;
  def map between dH_c_dt and P_G6P for
    vars H_c and H_c;
  enddef;
  def map between dH_c_dt and P_GLU for
    vars H_c and H_c;
  enddef;
  def map between dH_c_dt and P_ASP for
    vars H_c and H_c;
  enddef;
  def map between dH_c_dt and J_HK for
    vars H_c and H_c;
  enddef;
  def map between dH_c_dt and J_CKc for
    vars H_c and H_c;
  enddef;
  def map between dMg_c_dt and P_ATP for
    vars Mg_c and Mg_c;
  enddef;
  def map between dMg_c_dt and P_ADP for
    vars Mg_c and Mg_c;
  enddef;
  def map between dMg_c_dt and P_AMP for
    vars Mg_c and Mg_c;
  enddef;
  def map between dMg_c_dt and P_PI for
    vars Mg_c and Mg_c;
  enddef;
  def map between dMg_c_dt and P_OAA for
    vars Mg_c and Mg_c;
  enddef;
  def map between dMg_c_dt and P_CIT for
    vars Mg_c and Mg_c;
  enddef;
  def map between dMg_c_dt and P_ICIT for
    vars Mg_c and Mg_c;
  enddef;
  def map between dMg_c_dt and P_SUC for
    vars Mg_c and Mg_c;
  enddef;
  def map between dMg_c_dt and P_MAL for
    vars Mg_c and Mg_c;
  enddef;
  def map between dMg_c_dt and P_PYR for
    vars Mg_c and Mg_c;
  enddef;
  def map between dMg_c_dt and P_GLU for
    vars Mg_c and Mg_c;
  enddef;
  def map between dMg_c_dt and P_ASP for
    vars Mg_c and Mg_c;
  enddef;
  def map between dK_c_dt and P_ATP for
    vars K_c and K_c;
  enddef;
  def map between dK_c_dt and P_ADP for
    vars K_c and K_c;
  enddef;
  def map between dK_c_dt and P_AMP for
    vars K_c and K_c;
  enddef;
  def map between dK_c_dt and P_PI for
    vars K_c and K_c;
  enddef;
  def map between dK_c_dt and P_CIT for
    vars K_c and K_c;
  enddef;
  def map between dK_c_dt and P_SUC for
    vars K_c and K_c;
  enddef;
  def map between dK_c_dt and P_MAL for
    vars K_c and K_c;
  enddef;
  def map between dPI_c_dt and J_PIt for
    vars PI_c and PI_c;
    vars J_PIt and J_PIt;
  enddef;
  def map between dATP_c_dt and P_ATP for
    vars ATP_c and ATP_c;
  enddef;
  def map between dATP_c_dt and J_ATPt for
    vars ATP_c and ATP_c;
    vars J_ATPt and J_ATPt;
  enddef;
  def map between dATP_c_dt and J_HK for
    vars J_HK and J_HK;
  enddef;
  def map between dATP_c_dt and J_CKc for
    vars ATP_c and ATP_c;
    vars J_CKc and J_CKc;
  enddef;
  def map between dATP_c_dt and J_AK for
    vars ATP_c and ATP_c;
    vars J_AKc and J_AKc;
  enddef;
  def map between dADP_c_dt and P_ADP for
    vars ADP_c and ADP_c;
  enddef;
  def map between dADP_c_dt and J_ADPt for
    vars ADP_c and ADP_c;
    vars J_ADPt and J_ADPt;
  enddef;
  def map between dADP_c_dt and J_HK for
    vars J_HK and J_HK;
  enddef;
  def map between dADP_c_dt and J_CKc for
    vars ADP_c and ADP_c;
    vars J_CKc and J_CKc;
  enddef;
  def map between dADP_c_dt and J_AK for
    vars ADP_c and ADP_c;
    vars J_AKc and J_AKc;
  enddef;
  def map between dGLC_c_dt and J_HK for
    vars GLC_c and GLC_c;
    vars J_HK and J_HK;
  enddef;
  def map between dG6P_c_dt and J_HK for
    vars G6P_c and G6P_c;
    vars J_HK and J_HK;
  enddef;
  def map between dPCr_c_dt and J_CKc for
    vars PCr_c and PCr_c;
    vars J_CKc and J_CKc;
  enddef;
  def map between dAMP_c_dt and J_AMPt for
    vars AMP_c and AMP_c;
    vars J_AMPt and J_AMPt;
  enddef;
  def map between dAMP_c_dt and J_CKc for
    vars AMP_c and AMP_c;
  enddef;
  def map between dAMP_c_dt and J_AK for
    vars AMP_c and AMP_c;
    vars J_AKc and J_AKc;
  enddef;
  def map between dH_x_dt and P_ATP for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and P_ADP for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and P_AMP for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and P_GTP for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and P_GDP for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and P_PI for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and P_COASH for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and P_CIT for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and P_ICIT for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and P_SCOA for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and P_SUC for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and P_FUM for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and P_MAL for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and P_CO2_tot for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and P_G6P for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and P_GLU for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and P_ASP for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and J_pdh for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and J_cits for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and J_isod for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and J_akgd for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and J_scoas for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and J_mdh for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and J_PYRH for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and J_GLUH for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and J_ASPGLU for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and J_C1 for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and J_C3 for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and J_C4 for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and J_F1 for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and J_PIHt for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and J_Hle for
    vars H_x and H_x;
  enddef;
  def map between dH_x_dt and J_KH for
    vars H_x and H_x;
  enddef;
  def map between dMg_x_dt and P_ATP for
    vars Mg_x and Mg_x;
  enddef;
  def map between dMg_x_dt and P_ADP for
    vars Mg_x and Mg_x;
  enddef;
  def map between dMg_x_dt and P_AMP for
    vars Mg_x and Mg_x;
  enddef;
  def map between dMg_x_dt and P_PI for
    vars Mg_x and Mg_x;
  enddef;
  def map between dMg_x_dt and P_OAA for
    vars Mg_x and Mg_x;
  enddef;
  def map between dMg_x_dt and P_CIT for
    vars Mg_x and Mg_x;
  enddef;
  def map between dMg_x_dt and P_ICIT for
    vars Mg_x and Mg_x;
  enddef;
  def map between dMg_x_dt and P_SUC for
    vars Mg_x and Mg_x;
  enddef;
  def map between dMg_x_dt and P_MAL for
    vars Mg_x and Mg_x;
  enddef;
  def map between dMg_x_dt and P_PYR for
    vars Mg_x and Mg_x;
  enddef;
  def map between dMg_x_dt and P_GLU for
    vars Mg_x and Mg_x;
  enddef;
  def map between dMg_x_dt and P_ASP for
    vars Mg_x and Mg_x;
  enddef;
  def map between dK_x_dt and P_ATP for
    vars K_x and K_x;
  enddef;
  def map between dK_x_dt and P_ADP for
    vars K_x and K_x;
  enddef;
  def map between dK_x_dt and P_AMP for
    vars K_x and K_x;
  enddef;
  def map between dK_x_dt and P_PI for
    vars K_x and K_x;
  enddef;
  def map between dK_x_dt and P_CIT for
    vars K_x and K_x;
  enddef;
  def map between dK_x_dt and P_SUC for
    vars K_x and K_x;
  enddef;
  def map between dK_x_dt and P_MAL for
    vars K_x and K_x;
  enddef;
  def map between dK_x_dt and J_KH for
    vars K_x and K_x;
  enddef;
  def map between parameters and ddPsi_dt for
    vars C_IM and C_IM;
    vars n_A and n_A;
  enddef;
  def map between parameters and dCOQ_x_dt for
    vars Q_tot and Q_tot;
  enddef;
  def map between parameters and dFAD_x_dt for
    vars FAD_tot and FAD_tot;
  enddef;
  def map between parameters and dNAD_x_dt for
    vars NAD_tot and NAD_tot;
  enddef;
  def map between parameters and dCox_i_dt for
    vars cytC_tot and cytC_tot;
  enddef;
  def map between parameters and dATP_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dADP_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dGTP_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dGDP_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dPI_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dNADH_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dQH2_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dPYR_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dACCOA_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dCIT_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dICIT_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dAKG_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dSCOA_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dCOASH_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dSUC_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dFUM_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dMAL_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dOAA_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dGLU_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dASP_x_dt for
    vars W_x and W_x;
  enddef;
  def map between parameters and dCred_i_dt for
    vars W_i and W_i;
  enddef;
  def map between parameters and dATP_i_dt for
    vars W_i and W_i;
  enddef;
  def map between parameters and dADP_i_dt for
    vars W_i and W_i;
  enddef;
  def map between parameters and dAMP_i_dt for
    vars W_i and W_i;
  enddef;
  def map between parameters and dPI_i_dt for
    vars W_i and W_i;
  enddef;
  def map between parameters and dPYR_i_dt for
    vars W_i and W_i;
  enddef;
  def map between parameters and dCIT_i_dt for
    vars W_i and W_i;
  enddef;
  def map between parameters and dICIT_i_dt for
    vars W_i and W_i;
  enddef;
  def map between parameters and dAKG_i_dt for
    vars W_i and W_i;
  enddef;
  def map between parameters and dSUC_i_dt for
    vars W_i and W_i;
  enddef;
  def map between parameters and dFUM_i_dt for
    vars W_i and W_i;
  enddef;
  def map between parameters and dMAL_i_dt for
    vars W_i and W_i;
  enddef;
  def map between parameters and dGLU_i_dt for
    vars W_i and W_i;
  enddef;
  def map between parameters and dASP_i_dt for
    vars W_i and W_i;
  enddef;
  def map between parameters and dPYR_c_dt for
    vars V_mito and V_mito;
    vars V_cyto and V_cyto;
    vars W_c and W_c;
  enddef;
  def map between parameters and dCIT_c_dt for
    vars V_mito and V_mito;
    vars V_cyto and V_cyto;
    vars W_c and W_c;
  enddef;
  def map between parameters and dICIT_c_dt for
    vars V_mito and V_mito;
    vars V_cyto and V_cyto;
    vars W_c and W_c;
  enddef;
  def map between parameters and dAKG_c_dt for
    vars V_mito and V_mito;
    vars V_cyto and V_cyto;
    vars W_c and W_c;
  enddef;
  def map between parameters and dSUC_c_dt for
    vars V_mito and V_mito;
    vars V_cyto and V_cyto;
    vars W_c and W_c;
  enddef;
  def map between parameters and dFUM_c_dt for
    vars V_mito and V_mito;
    vars V_cyto and V_cyto;
    vars W_c and W_c;
  enddef;
  def map between parameters and dMAL_c_dt for
    vars V_mito and V_mito;
    vars V_cyto and V_cyto;
    vars W_c and W_c;
  enddef;
  def map between parameters and dGLU_c_dt for
    vars V_mito and V_mito;
    vars V_cyto and V_cyto;
    vars W_c and W_c;
  enddef;
  def map between parameters and dASP_c_dt for
    vars V_mito and V_mito;
    vars V_cyto and V_cyto;
    vars W_c and W_c;
  enddef;
  def map between parameters and dPI_c_dt for
    vars V_mito and V_mito;
    vars V_cyto and V_cyto;
    vars W_c and W_c;
    vars J_AtC and J_AtC;
  enddef;
  def map between parameters and dATP_c_dt for
    vars V_mito and V_mito;
    vars V_cyto and V_cyto;
    vars W_c and W_c;
    vars J_AtC and J_AtC;
  enddef;
  def map between parameters and dADP_c_dt for
    vars V_mito and V_mito;
    vars V_cyto and V_cyto;
    vars W_c and W_c;
    vars J_AtC and J_AtC;
  enddef;
  def map between parameters and dGLC_c_dt for
    vars W_c and W_c;
  enddef;
  def map between parameters and dG6P_c_dt for
    vars W_c and W_c;
  enddef;
  def map between parameters and dPCr_c_dt for
    vars W_c and W_c;
  enddef;
  def map between parameters and dAMP_c_dt for
    vars V_mito and V_mito;
    vars V_cyto and V_cyto;
    vars W_c and W_c;
  enddef;
  def map between dNADH_x_dt and dNAD_x_dt for
    vars NADH_x and NADH_x;
    vars dNADH_x_dt and dNADH_x_dt;
  enddef;
  def map between dCred_i_dt and dCox_i_dt for
    vars Cred_i and Cred_i;
  enddef;
  def map between BINDING_IONS and dH_x_dt for
    vars H_x and H_x;
    vars dH_x_dt and dH_x_dt;
    vars D and D;
    vars phi_H and phi_H;
    vars phi_Mg and phi_Mg;
    vars phi_K and phi_K;
    vars dHB_dMg and dHB_dMg;
    vars dHB_dK and dHB_dK;
    vars dMgB_dK and dMgB_dK;
    vars dKB_dMg and dKB_dMg;
    vars alpha_K and alpha_K;
    vars alpha_Mg and alpha_Mg;
  enddef;
  def map between BINDING_IONS and dATP_x_dt for
    vars ATP_x and ATP_x;
    vars dATP_x_dt and dATP_x_dt;
  enddef;
  def map between BINDING_IONS and dADP_x_dt for
    vars ADP_x and ADP_x;
    vars dADP_x_dt and dADP_x_dt;
  enddef;
  def map between BINDING_IONS and dAMP_x_dt for
    vars AMP_x and AMP_x;
    vars dAMP_x_dt and dAMP_x_dt;
  enddef;
  def map between BINDING_IONS and dGTP_x_dt for
    vars GTP_x and GTP_x;
    vars dGTP_x_dt and dGTP_x_dt;
  enddef;
  def map between BINDING_IONS and dGDP_x_dt for
    vars GDP_x and GDP_x;
    vars dGDP_x_dt and dGDP_x_dt;
  enddef;
  def map between BINDING_IONS and dPI_x_dt for
    vars PI_x and PI_x;
    vars dPI_x_dt and dPI_x_dt;
  enddef;
  def map between BINDING_IONS and dNADH_x_dt for
    vars NADH_x and NADH_x;
    vars dNADH_x_dt and dNADH_x_dt;
  enddef;
  def map between BINDING_IONS and dNAD_x_dt for
    vars NAD_x and NAD_x;
    vars dNAD_x_dt and dNAD_x_dt;
  enddef;
  def map between BINDING_IONS and dQH2_x_dt for
    vars QH2_x and QH2_x;
    vars dQH2_x_dt and dQH2_x_dt;
  enddef;
  def map between BINDING_IONS and dCOQ_x_dt for
    vars COQ_x and COQ_x;
    vars dCOQ_x_dt and dCOQ_x_dt;
  enddef;
  def map between BINDING_IONS and dPYR_x_dt for
    vars PYR_x and PYR_x;
    vars dPYR_x_dt and dPYR_x_dt;
  enddef;
  def map between BINDING_IONS and dOAA_x_dt for
    vars OAA_x and OAA_x;
    vars dOAA_x_dt and dOAA_x_dt;
  enddef;
  def map between BINDING_IONS and dACCOA_x_dt for
    vars ACCOA_x and ACCOA_x;
    vars dACCOA_x_dt and dACCOA_x_dt;
  enddef;
  def map between BINDING_IONS and dCIT_x_dt for
    vars CIT_x and CIT_x;
    vars dCIT_x_dt and dCIT_x_dt;
  enddef;
  def map between BINDING_IONS and dICIT_x_dt for
    vars ICIT_x and ICIT_x;
    vars dICIT_x_dt and dICIT_x_dt;
  enddef;
  def map between BINDING_IONS and dAKG_x_dt for
    vars AKG_x and AKG_x;
    vars dAKG_x_dt and dAKG_x_dt;
  enddef;
  def map between BINDING_IONS and dSCOA_x_dt for
    vars SCOA_x and SCOA_x;
    vars dSCOA_x_dt and dSCOA_x_dt;
  enddef;
  def map between BINDING_IONS and dCOASH_x_dt for
    vars COASH_x and COASH_x;
    vars dCOASH_x_dt and dCOASH_x_dt;
  enddef;
  def map between BINDING_IONS and dSUC_x_dt for
    vars SUC_x and SUC_x;
    vars dSUC_x_dt and dSUC_x_dt;
  enddef;
  def map between BINDING_IONS and dFUM_x_dt for
    vars FUM_x and FUM_x;
    vars dFUM_x_dt and dFUM_x_dt;
  enddef;
  def map between BINDING_IONS and dMAL_x_dt for
    vars MAL_x and MAL_x;
    vars dMAL_x_dt and dMAL_x_dt;
  enddef;
  def map between BINDING_IONS and dGLU_x_dt for
    vars GLU_x and GLU_x;
    vars dGLU_x_dt and dGLU_x_dt;
  enddef;
  def map between BINDING_IONS and dASP_x_dt for
    vars ASP_x and ASP_x;
    vars dASP_x_dt and dASP_x_dt;
  enddef;
  def map between BINDING_IONS and dK_x_dt for
    vars K_x and K_x;
    vars dK_x_dt and dK_x_dt;
    vars D and D;
    vars phi_H and phi_H;
    vars phi_Mg and phi_Mg;
    vars phi_K and phi_K;
    vars dHB_dMg and dHB_dMg;
    vars dMgB_dH and dMgB_dH;
    vars dKB_dMg and dKB_dMg;
    vars dKB_dH and dKB_dH;
    vars alpha_H and alpha_H;
    vars alpha_Mg and alpha_Mg;
  enddef;
  def map between BINDING_IONS and dMg_x_dt for
    vars Mg_x and Mg_x;
    vars dMg_x_dt and dMg_x_dt;
    vars D and D;
    vars phi_H and phi_H;
    vars phi_Mg and phi_Mg;
    vars phi_K and phi_K;
    vars dHB_dK and dHB_dK;
    vars dKB_dH and dKB_dH;
    vars dMgB_dK and dMgB_dK;
    vars dMgB_dH and dMgB_dH;
    vars alpha_H and alpha_H;
    vars alpha_K and alpha_K;
  enddef;
  def map between BINDING_IONS and dO2_x_dt for
    vars O2_x and O2_x;
    vars dO2_x_dt and dO2_x_dt;
  enddef;
  def map between BINDING_IONS and dFAD_x_dt for
    vars FAD_x and FAD_x;
    vars FADH2_x and FADH2_x;
    vars dFAD_x_dt and dFAD_x_dt;
    vars dFADH2_x_dt and dFADH2_x_dt;
  enddef;
  def map between BINDING_IONS and dCO2_tot_x_dt for
    vars CO2_tot_x and CO2_tot_x;
    vars dCO2_tot_x_dt and dCO2_tot_x_dt;
  enddef;
  def map between BINDING_IONS and P_H for
    vars P_H_x and P_H_x;
    vars KH_H_x and K_H;
    vars KMg_H_x and K_Mg;
    vars KK_H_x and K_K;
  enddef;
  def map between BINDING_IONS and P_ATP for
    vars P_ATP_x and P_ATP_x;
    vars KH_ATP_x and K_H;
    vars KMg_ATP_x and K_Mg;
    vars KK_ATP_x and K_K;
    vars KH_GTP_x and K_H;
    vars KMg_GTP_x and K_Mg;
    vars KK_GTP_x and K_K;
  enddef;
  def map between BINDING_IONS and P_ADP for
    vars P_ADP_x and P_ADP_x;
    vars KH_ADP_x and K_H;
    vars KMg_ADP_x and K_Mg;
    vars KK_ADP_x and K_K;
    vars KH_GDP_x and K_H;
    vars KMg_GDP_x and K_Mg;
    vars KK_GDP_x and K_K;
  enddef;
  def map between BINDING_IONS and P_AMP for
    vars P_AMP_x and P_AMP_x;
    vars KH_AMP_x and K_H;
    vars KMg_AMP_x and K_Mg;
    vars KK_AMP_x and K_K;
  enddef;
  def map between BINDING_IONS and P_GTP for
    vars P_GTP_x and P_GTP_x;
  enddef;
  def map between BINDING_IONS and P_GDP for
    vars P_GDP_x and P_GDP_x;
  enddef;
  def map between BINDING_IONS and P_PI for
    vars P_PI_x and P_PI_x;
    vars KH_PI_x and K_H;
    vars KMg_PI_x and K_Mg;
    vars KK_PI_x and K_K;
  enddef;
  def map between BINDING_IONS and P_NADH for
    vars P_NADH_x and P_NADH_x;
    vars KH_NADH_x and K_H;
    vars KMg_NADH_x and K_Mg;
    vars KK_NADH_x and K_K;
  enddef;
  def map between BINDING_IONS and P_NAD for
    vars P_NAD_x and P_NAD_x;
    vars KH_NAD_x and K_H;
    vars KMg_NAD_x and K_Mg;
    vars KK_NAD_x and K_K;
  enddef;
  def map between BINDING_IONS and P_QH2 for
    vars P_QH2_x and P_QH2_x;
    vars KH_QH2_x and K_H;
    vars KMg_QH2_x and K_Mg;
    vars KK_QH2_x and K_K;
  enddef;
  def map between BINDING_IONS and P_COQ for
    vars P_COQ_x and P_COQ_x;
    vars KH_COQ_x and K_H;
    vars KMg_COQ_x and K_Mg;
    vars KK_COQ_x and K_K;
  enddef;
  def map between BINDING_IONS and P_PYR for
    vars P_PYR_x and P_PYR_x;
    vars KH_PYR_x and K_H;
    vars KMg_PYR_x and K_Mg;
    vars KK_PYR_x and K_K;
  enddef;
  def map between BINDING_IONS and P_OAA for
    vars P_OAA_x and P_OAA_x;
    vars KH_OAA_x and K_H;
    vars KMg_OAA_x and K_Mg;
    vars KK_OAA_x and K_K;
  enddef;
  def map between BINDING_IONS and P_ACCOA for
    vars P_ACCOA_x and P_ACCOA_x;
    vars KH_ACCOA_x and K_H;
    vars KMg_ACCOA_x and K_Mg;
    vars KK_ACCOA_x and K_K;
  enddef;
  def map between BINDING_IONS and P_CIT for
    vars P_CIT_x and P_CIT_x;
    vars KH_CIT_x and K_H;
    vars KMg_CIT_x and K_Mg;
    vars KK_CIT_x and K_K;
  enddef;
  def map between BINDING_IONS and P_ICIT for
    vars P_ICIT_x and P_ICIT_x;
    vars KH_ICIT_x and K_H;
    vars KMg_ICIT_x and K_Mg;
    vars KK_ICIT_x and K_K;
  enddef;
  def map between BINDING_IONS and P_AKG for
    vars P_AKG_x and P_AKG_x;
    vars KH_AKG_x and K_H;
    vars KMg_AKG_x and K_Mg;
    vars KK_AKG_x and K_K;
  enddef;
  def map between BINDING_IONS and P_SCOA for
    vars P_SCOA_x and P_SCOA_x;
    vars KH_SCOA_x and K_H;
    vars KMg_SCOA_x and K_Mg;
    vars KK_SCOA_x and K_K;
  enddef;
  def map between BINDING_IONS and P_COASH for
    vars P_COASH_x and P_COASH_x;
    vars KH_COASH_x and K_H;
    vars KMg_COASH_x and K_Mg;
    vars KK_COASH_x and K_K;
  enddef;
  def map between BINDING_IONS and P_SUC for
    vars P_SUC_x and P_SUC_x;
    vars KH_SUC_x and K_H;
    vars KMg_SUC_x and K_Mg;
    vars KK_SUC_x and K_K;
  enddef;
  def map between BINDING_IONS and P_FUM for
    vars P_FUM_x and P_FUM_x;
    vars KH_FUM_x and K_H;
    vars KMg_FUM_x and K_Mg;
    vars KK_FUM_x and K_K;
  enddef;
  def map between BINDING_IONS and P_MAL for
    vars P_MAL_x and P_MAL_x;
    vars KH_MAL_x and K_H;
    vars KMg_MAL_x and K_Mg;
    vars KK_MAL_x and K_K;
  enddef;
  def map between BINDING_IONS and P_GLU for
    vars P_GLU_x and P_GLU_x;
    vars KH_GLU_x and K_H;
    vars KMg_GLU_x and K_Mg;
    vars KK_GLU_x and K_K;
  enddef;
  def map between BINDING_IONS and P_ASP for
    vars P_ASP_x and P_ASP_x;
    vars KH_ASP_x and K_H;
    vars KMg_ASP_x and K_Mg;
    vars KK_ASP_x and K_K;
  enddef;
  def map between BINDING_IONS and P_K for
    vars P_K_x and P_K_x;
    vars KH_K_x and K_H;
    vars KMg_K_x and K_Mg;
    vars KK_K_x and K_K;
  enddef;
  def map between BINDING_IONS and P_Mg for
    vars P_Mg_x and P_Mg_x;
    vars KH_Mg_x and K_H;
    vars KMg_Mg_x and K_Mg;
    vars KK_Mg_x and K_K;
  enddef;
  def map between BINDING_IONS and P_O2 for
    vars P_O2_x and P_O2_x;
    vars KH_O2_x and K_H;
    vars KMg_O2_x and K_Mg;
    vars KK_O2_x and K_K;
  enddef;
  def map between BINDING_IONS and P_FAD for
    vars P_FAD_x and P_FAD_x;
    vars KH_FAD_x and K_H;
    vars KMg_FAD_x and K_Mg;
    vars KK_FAD_x and K_K;
  enddef;
  def map between BINDING_IONS and P_FADH2 for
    vars P_FADH2_x and P_FADH2_x;
    vars KH_FADH2_x and K_H;
    vars KMg_FADH2_x and K_Mg;
    vars KK_FADH2_x and K_K;
  enddef;
  def map between BINDING_IONS and P_CO2_tot for
    vars P_CO2_tot_x and P_CO2_tot_x;
    vars KH_CO2_tot_x and K_H;
    vars KMg_CO2_tot_x and K_Mg;
    vars KK_CO2_tot_x and K_K;
  enddef;
  def map between BINDING_IONS and parameters for
    vars n_A and n_A;
    vars W_x and W_x;
  enddef;
  def map between BINDING_IONS and J_pdh for
    vars J_pdh and J_pdh;
  enddef;
  def map between BINDING_IONS and J_cits for
    vars J_cits and J_cits;
  enddef;
  def map between BINDING_IONS and J_akgd for
    vars J_akgd and J_akgd;
  enddef;
  def map between BINDING_IONS and J_scoas for
    vars J_scoas and J_scoas;
  enddef;
  def map between BINDING_IONS and J_mdh for
    vars J_mdh and J_mdh;
  enddef;
  def map between BINDING_IONS and J_PYRH for
    vars J_PYRH and J_PYRH;
  enddef;
  def map between BINDING_IONS and J_GLUH for
    vars J_GLUH and J_GLUH;
  enddef;
  def map between BINDING_IONS and J_CITMAL for
    vars J_CITMAL and J_CITMAL;
  enddef;
  def map between BINDING_IONS and J_ASPGLU for
    vars J_ASPGLU and J_ASPGLU;
  enddef;
  def map between BINDING_IONS and J_C1 for
    vars J_C1 and J_C1;
  enddef;
  def map between BINDING_IONS and J_C3 for
    vars J_C3 and J_C3;
  enddef;
  def map between BINDING_IONS and J_C4 for
    vars J_C4 and J_C4;
  enddef;
  def map between BINDING_IONS and J_F1 for
    vars J_F1 and J_F1;
  enddef;
  def map between BINDING_IONS and J_PIHt for
    vars J_PIHt and J_PIHt;
  enddef;
  def map between BINDING_IONS and J_Hle for
    vars J_Hle and J_Hle;
  enddef;
  def map between BINDING_IONS and J_KH for
    vars J_KH and J_KH;
  enddef;
enddef;
