<?xml version='1.0' encoding='utf-8'?>
<!--
This CellML file was generated on 4/07/2008 at 3:45:13 at p.m. using:

COR (0.9.31.979)
Copyright 2002-2008 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="panerai_1980" cmeta:id="panerai_1980">
<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>A Model of Cardiac Muscle Mechanics and Energetics</title>
				<author>
					<firstname>Geoffrey</firstname>
					<surname>Nunns</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
        This model is known to run in both OpenCell and COR. The units are consistent throughout, although it does not recreate all the published results. It contains a time delay, which was ignored in the model. This model simulates an isometric contraction.  
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
Abstract: A model of cardiac muscle is proposed in which the contractile element is described by the sliding-filament theory of muscle contraction. The model is able to reproduce the time-varying patterns of tension, velocity of shortening, and muscle shortening as well as oxygen consumption of isometric or isotonic contractions. Quick releases can also be simulated in the model as well as changes in contractile state and initial muscle length. The results obtained with the model are in agreement with a wide range of experimental data concerning the mechanics and energetics of mammalian cardiac muscle.    
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="panerai_1980.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram depicting the actin-myosin crossbrige cycle.</caption>
</informalfigure>

				<para>
The original paper reference is cited below:
</para>
				<para>
A Model of Cardiac Muscle Mechanics and Energetics, Ronney B. Panerai, 1980, <emphasis>Journal of Biomechanics</emphasis>, 13, 929-940. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=7276000&amp;dopt=Abstract">PubMed ID: 7276000    </ulink>
				</para>
				
			</sect1>
		</article>
	</documentation>   
   
   
   <units base_units="yes" name="muscle_length"/>
   <units name="molar">
      <unit units="mole"/>
      <unit units="liter" exponent="-1"/>
   </units>
   <units name="per_second">
      <unit units="second" exponent="-1"/>
   </units>
   <units name="per_second_squared">
      <unit units="second" exponent="-2"/>
   </units>
   <units name="nanometer">
      <unit units="meter" prefix="nano"/>
   </units>
   <units name="force">
      <unit units="kilogram"/>
      <unit units="meter"/>
      <unit units="second" exponent="-2"/>
   </units>
   <component name="environment">
      <variable units="second" public_interface="out" name="t"/>
      <variable units="nanometer" public_interface="out" name="x" initial_value="10"/>
   </component>
   <component name="Crossbridges_attached">
      <variable units="dimensionless" public_interface="out" name="n" initial_value="0"/>
      <variable units="second" public_interface="in" name="t"/>
      <variable units="dimensionless" public_interface="in" name="A_c"/>
      <variable units="per_second" private_interface="in" name="f"/>
      <variable units="per_second" private_interface="in" name="g"/>
      <variable units="nanometer" private_interface="out" name="h" initial_value="12"/>
      <variable units="nanometer" public_interface="in" private_interface="out" name="x"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>n</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>f</ci>
                  <apply>
                     <minus/>
                     <ci>A_c</ci>
                     <ci>n</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>g</ci>
                  <ci>n</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="f">
      <variable units="per_second" public_interface="out" name="f"/>
      <variable units="nanometer" public_interface="in" name="x"/>
      <variable units="nanometer" public_interface="in" name="h"/>
      <variable units="per_second" name="f_1" initial_value="70"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>f</ci>
            <piecewise>
               <piece>
                  <cn cellml:units="per_second">0</cn>
                  <apply>
                     <lt/>
                     <ci>x</ci>
                     <cn cellml:units="nanometer">0</cn>
                  </apply>
               </piece>
               <piece>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>f_1</ci>
                        <ci>x</ci>
                     </apply>
                     <ci>h</ci>
                  </apply>
                  <apply>
                     <and/>
                     <apply>
                        <geq/>
                        <ci>x</ci>
                        <cn cellml:units="nanometer">0</cn>
                     </apply>
                     <apply>
                        <lt/>
                        <ci>x</ci>
                        <ci>h</ci>
                     </apply>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="per_second">0</cn>
               </otherwise>
            </piecewise>
         </apply>
      </math>
   </component>
   <component name="g">
      <variable units="per_second" public_interface="out" name="g"/>
      <variable units="nanometer" public_interface="in" name="x"/>
      <variable units="nanometer" public_interface="in" name="h"/>
      <variable units="per_second" name="g_1" initial_value="40"/>
      <variable units="per_second" name="g_2" initial_value="240"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>g</ci>
            <piecewise>
               <piece>
                  <ci>g_2</ci>
                  <apply>
                     <lt/>
                     <ci>x</ci>
                     <cn cellml:units="nanometer">0</cn>
                  </apply>
               </piece>
               <piece>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>g_1</ci>
                        <ci>x</ci>
                     </apply>
                     <ci>h</ci>
                  </apply>
                  <apply>
                     <and/>
                     <apply>
                        <geq/>
                        <ci>x</ci>
                        <cn cellml:units="nanometer">0</cn>
                     </apply>
                     <apply>
                        <lt/>
                        <ci>x</ci>
                        <ci>h</ci>
                     </apply>
                  </apply>
               </piece>
               <otherwise>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>g_1</ci>
                        <ci>x</ci>
                     </apply>
                     <ci>h</ci>
                  </apply>
               </otherwise>
            </piecewise>
         </apply>
      </math>
   </component>
   <component name="Ca_sarcoplasm">
      <variable units="molar" public_interface="out" name="Ca_f"/>
      <variable units="second" public_interface="in" name="t"/>
      <variable units="second" name="t_d" initial_value="0.3"/>
      <variable units="per_second_squared" name="a_1" initial_value="200"/>
      <variable units="per_second_squared" name="b_1" initial_value="5"/>
      <variable units="molar" name="Ca_0" initial_value="0.45e-6"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>Ca_f</ci>
            <apply>
               <times/>
               <ci>Ca_0</ci>
               <apply>
                  <abs/>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <exp/>
                        <apply>
                           <times/>
                           <apply>
                              <minus/>
                              <ci>a_1</ci>
                           </apply>
                           <apply>
                              <power/>
                              <ci>t</ci>
                              <cn cellml:units="dimensionless">2</cn>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>b_1</ci>
                     </apply>
                     <apply>
                        <power/>
                        <apply>
                           <minus/>
                           <ci>t</ci>
                           <ci>t_d</ci>
                        </apply>
                        <cn cellml:units="dimensionless">2</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Actin_free">
      <variable units="dimensionless" public_interface="out" name="A_c" initial_value="1"/>
      <variable units="second" public_interface="in" name="t"/>
      <variable units="per_second" name="c_1" initial_value="200e12"/>
      <variable units="per_second" name="c_2"/>
      <variable units="per_second" name="c_2_0" initial_value="20"/>
      <variable units="dimensionless" name="k_i" initial_value="30.9"/>
      <variable units="muscle_length" public_interface="in" name="s_h"/>
      <variable units="dimensionless" name="q" initial_value="1.45"/>
      <variable units="molar" public_interface="in" name="Ca_f"/>
      <variable units="dimensionless" name="AT_0" initial_value="2"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>c_2</ci>
            <apply>
               <times/>
               <ci>c_2_0</ci>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <ci>k_i</ci>
                     <apply>
                        <power/>
                        <apply>
                           <divide/>
                           <ci>s_h</ci>
                           <cn cellml:units="muscle_length">1</cn>
                        </apply>
                        <ci>q</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>A_c</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>c_1</ci>
                  <apply>
                     <power/>
                     <apply>
                        <divide/>
                        <ci>Ca_f</ci>
                        <cn cellml:units="molar">1</cn>
                     </apply>
                     <cn cellml:units="dimensionless">2</cn>
                  </apply>
                  <apply>
                     <minus/>
                     <ci>AT_0</ci>
                     <ci>A_c</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>c_2</ci>
                  <ci>A_c</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Series_Elastic_Element">
      <variable units="force" public_interface="out" name="F_SE"/>
      <variable units="force" public_interface="out" name="alpha_s" initial_value="0.1027"/>
      <variable units="muscle_length" public_interface="out" name="beta_s" initial_value="20"/>
      <variable units="muscle_length" private_interface="in" name="x_s"/>
      <variable units="muscle_length" public_interface="out" private_interface="out" name="x_so" initial_value="0.0387"/>
      <variable units="muscle_length" public_interface="in" private_interface="out" name="s_h"/>
      <variable units="muscle_length" public_interface="in" private_interface="out" name="x_m"/>
      <variable units="muscle_length" public_interface="out" private_interface="out" name="L_max" initial_value="1"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>F_SE</ci>
            <apply>
               <times/>
               <ci>alpha_s</ci>
               <apply>
                  <minus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>beta_s</ci>
                           <ci>x_s</ci>
                        </apply>
                        <apply>
                           <times/>
                           <cn cellml:units="muscle_length">1</cn>
                           <cn cellml:units="muscle_length">1</cn>
                        </apply>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="SE_constants">
      <variable units="muscle_length" public_interface="out" name="x_s"/>
      <variable units="muscle_length" public_interface="in" name="x_so"/>
      <variable units="muscle_length" public_interface="in" name="s_h"/>
      <variable units="muscle_length" public_interface="in" name="x_m"/>
      <variable units="muscle_length" public_interface="in" name="L_max"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>x_s</ci>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <ci>x_so</ci>
                  <ci>s_h</ci>
                  <ci>x_m</ci>
               </apply>
               <ci>L_max</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Parallel_Elastic_Element">
      <variable units="force" public_interface="out" name="F_PE"/>
      <variable units="force" public_interface="out" name="alpha_p" initial_value="0.00224"/>
      <variable units="muscle_length" public_interface="out" name="beta_p" initial_value="20"/>
      <variable units="muscle_length" private_interface="in" name="x_p"/>
      <variable units="muscle_length" public_interface="out" private_interface="out" name="x_po" initial_value="0.221"/>
      <variable units="muscle_length" public_interface="in" private_interface="out" name="s_h"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>F_PE</ci>
            <apply>
               <times/>
               <ci>alpha_p</ci>
               <apply>
                  <minus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>beta_p</ci>
                           <ci>x_p</ci>
                        </apply>
                        <apply>
                           <times/>
                           <cn cellml:units="muscle_length">1</cn>
                           <cn cellml:units="muscle_length">1</cn>
                        </apply>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="PE_constants">
      <variable units="muscle_length" public_interface="out" name="x_p"/>
      <variable units="muscle_length" public_interface="in" name="x_po"/>
      <variable units="muscle_length" public_interface="in" name="s_h"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>x_p</ci>
            <apply>
               <minus/>
               <ci>x_po</ci>
               <ci>s_h</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Contractile_Element">
      <variable units="force" public_interface="out" name="F_CE"/>
      <variable units="force" public_interface="in" name="F_SE"/>
      <variable units="force" public_interface="in" name="F_PE"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>F_CE</ci>
            <apply>
               <minus/>
               <ci>F_SE</ci>
               <ci>F_PE</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="s_h">
      <variable units="muscle_length" public_interface="out" name="s_h"/>
      <variable units="muscle_length" public_interface="in" name="x_po"/>
      <variable units="force" name="F_PL" initial_value="3"/>
      <variable units="force" public_interface="in" name="alpha_p"/>
      <variable units="muscle_length" public_interface="in" name="beta_p"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>s_h</ci>
            <apply>
               <minus/>
               <ci>x_po</ci>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <cn cellml:units="muscle_length">1</cn>
                     <cn cellml:units="muscle_length">1</cn>
                     <apply>
                        <log/>
                        <apply>
                           <plus/>
                           <cn cellml:units="dimensionless">1</cn>
                           <apply>
                              <divide/>
                              <ci>F_PL</ci>
                              <ci>alpha_p</ci>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
                  <ci>beta_p</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="X_0">
      <variable units="muscle_length" public_interface="out" name="X_S_0"/>
      <variable units="muscle_length" public_interface="out" name="X_M_0"/>
      <variable units="force" name="F_PL" initial_value="3"/>
      <variable units="force" public_interface="in" name="alpha_s"/>
      <variable units="muscle_length" public_interface="in" name="beta_s"/>
      <variable units="muscle_length" public_interface="in" name="L_max"/>
      <variable units="muscle_length" public_interface="in" name="s_h"/>
      <variable units="muscle_length" public_interface="in" name="x_so"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>X_S_0</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="muscle_length">1</cn>
                  <cn cellml:units="muscle_length">1</cn>
                  <apply>
                     <log/>
                     <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                           <divide/>
                           <ci>F_PL</ci>
                           <ci>alpha_s</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <ci>beta_s</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>X_M_0</ci>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>X_S_0</ci>
                     <ci>L_max</ci>
                  </apply>
                  <ci>s_h</ci>
               </apply>
               <ci>x_so</ci>
            </apply>
         </apply>
      </math>
   </component>
   <group>
      <relationship_ref relationship="encapsulation"/>
      <component_ref component="Crossbridges_attached">
         <component_ref component="g"/>
         <component_ref component="f"/>
      </component_ref>
      <component_ref component="Series_Elastic_Element">
         <component_ref component="SE_constants"/>
      </component_ref>
      <component_ref component="Parallel_Elastic_Element">
         <component_ref component="PE_constants"/>
      </component_ref>
   </group>
   <connection>
      <map_components component_2="environment" component_1="Crossbridges_attached"/>
      <map_variables variable_2="t" variable_1="t"/>
      <map_variables variable_2="x" variable_1="x"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="Ca_sarcoplasm"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="Actin_free"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>
   <connection>
      <map_components component_2="Actin_free" component_1="Ca_sarcoplasm"/>
      <map_variables variable_2="Ca_f" variable_1="Ca_f"/>
   </connection>
   <connection>
      <map_components component_2="g" component_1="Crossbridges_attached"/>
      <map_variables variable_2="g" variable_1="g"/>
      <map_variables variable_2="h" variable_1="h"/>
      <map_variables variable_2="x" variable_1="x"/>
   </connection>
   <connection>
      <map_components component_2="f" component_1="Crossbridges_attached"/>
      <map_variables variable_2="f" variable_1="f"/>
      <map_variables variable_2="h" variable_1="h"/>
      <map_variables variable_2="x" variable_1="x"/>
   </connection>
   <connection>
      <map_components component_2="Actin_free" component_1="Crossbridges_attached"/>
      <map_variables variable_2="A_c" variable_1="A_c"/>
   </connection>
   <connection>
      <map_components component_2="Series_Elastic_Element" component_1="Contractile_Element"/>
      <map_variables variable_2="F_SE" variable_1="F_SE"/>
   </connection>
   <connection>
      <map_components component_2="Parallel_Elastic_Element" component_1="Contractile_Element"/>
      <map_variables variable_2="F_PE" variable_1="F_PE"/>
   </connection>
   <connection>
      <map_components component_2="SE_constants" component_1="Series_Elastic_Element"/>
      <map_variables variable_2="x_s" variable_1="x_s"/>
      <map_variables variable_2="x_so" variable_1="x_so"/>
      <map_variables variable_2="s_h" variable_1="s_h"/>
      <map_variables variable_2="x_m" variable_1="x_m"/>
      <map_variables variable_2="L_max" variable_1="L_max"/>
   </connection>
   <connection>
      <map_components component_2="PE_constants" component_1="Parallel_Elastic_Element"/>
      <map_variables variable_2="x_p" variable_1="x_p"/>
      <map_variables variable_2="s_h" variable_1="s_h"/>
      <map_variables variable_2="x_po" variable_1="x_po"/>
   </connection>
   <connection>
      <map_components component_2="s_h" component_1="Actin_free"/>
      <map_variables variable_2="s_h" variable_1="s_h"/>
   </connection>
   <connection>
      <map_components component_2="s_h" component_1="Parallel_Elastic_Element"/>
      <map_variables variable_2="alpha_p" variable_1="alpha_p"/>
      <map_variables variable_2="beta_p" variable_1="beta_p"/>
      <map_variables variable_2="x_po" variable_1="x_po"/>
      <map_variables variable_2="s_h" variable_1="s_h"/>
   </connection>
   <connection>
      <map_components component_2="s_h" component_1="Series_Elastic_Element"/>
      <map_variables variable_2="s_h" variable_1="s_h"/>
   </connection>
   <connection>
      <map_components component_2="s_h" component_1="X_0"/>
      <map_variables variable_2="s_h" variable_1="s_h"/>
   </connection>
   <connection>
      <map_components component_2="Series_Elastic_Element" component_1="X_0"/>
      <map_variables variable_2="alpha_s" variable_1="alpha_s"/>
      <map_variables variable_2="beta_s" variable_1="beta_s"/>
      <map_variables variable_2="x_so" variable_1="x_so"/>
      <map_variables variable_2="L_max" variable_1="L_max"/>
      <map_variables variable_2="x_m" variable_1="X_M_0"/>
   </connection>
<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#d8834f70-2a0d-4ccc-9ee1-1040e6d987ee">
    <rdf:li rdf:resource="rdf:#3da46d4e-0cb6-43db-aefa-24851297847a"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#0da3b6dc-abd9-423c-bd1d-ccd6fad03072">
    <vCard:FN>Geoff Nunns</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher/>
    <cmeta:comment rdf:resource="rdf:#c5dcc629-e7a3-41ae-9cdf-4e63d3413a25"/>
    <dcterms:created rdf:resource="rdf:#4dd9e707-97e5-49f3-9e34-76a5b5c42cda"/>
    <dc:creator rdf:resource="rdf:#457fd585-508c-4a52-a604-5a2595f5b358"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#05e0c505-883d-4c36-9c8b-ecd94919412d">
    <vCard:Given>Geoffrey</vCard:Given>
    <vCard:Family>Nunns</vCard:Family>
    <vCard:Other>Rogan</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3da46d4e-0cb6-43db-aefa-24851297847a">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#433f14fa-595b-4027-825a-7c922b94d7d4"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bb9f5581-0569-40d3-86a0-3c221b494fae">
    <dcterms:W3CDTF>1980-02-21 00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b61beff8-ded2-4634-bab7-71f3e6636efe">
    <dc:creator rdf:resource="rdf:#5923e028-9879-4df7-be9a-b74ee78ad5b6"/>
    <rdf:value> This model is known to run in both PCEnv and COR. The units are consistent throughout, although it does not recreate all the published results. It contains a time delay, which was ignored in the model, and may be the reason for this. This model simulates an isometric contraction. </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#cad5a1d2-6223-4deb-865e-0f68e6c775f2">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5923e028-9879-4df7-be9a-b74ee78ad5b6">
    <vCard:FN>Geoff Nunns</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4dd9e707-97e5-49f3-9e34-76a5b5c42cda">
    <dcterms:W3CDTF>2008-07-03T00:00:00+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#457fd585-508c-4a52-a604-5a2595f5b358">
    <vCard:ORG rdf:resource="rdf:#cad5a1d2-6223-4deb-865e-0f68e6c775f2"/>
    <vCard:EMAIL rdf:resource="rdf:#3885ead9-9d2f-469e-85b4-53a5722cc295"/>
    <vCard:N rdf:resource="rdf:#05e0c505-883d-4c36-9c8b-ecd94919412d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c5dcc629-e7a3-41ae-9cdf-4e63d3413a25">
    <dc:creator rdf:resource="rdf:#0da3b6dc-abd9-423c-bd1d-ccd6fad03072"/>
    <rdf:value> This model is known to run in both PCEnv and COR. The units are consistent throughout, although it does not recreate all the published results. It contains a time delay, which was ignored in the model, and may be the reason for this. This model simulates an isometric contraction. </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a4351a3a-66de-42dc-910f-270587f6d662">
    <dc:title>Journal of Biomechanics</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#77b9b3b2-4112-4cb6-9d8c-179cbed09487">
    <dc:creator rdf:resource="rdf:#d8834f70-2a0d-4ccc-9ee1-1040e6d987ee"/>
    <dc:title>A Model of Cardiac Muscle Mechanics and Energetics</dc:title>
    <bqs:volume>13</bqs:volume>
    <bqs:first_page>929</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#a4351a3a-66de-42dc-910f-270587f6d662"/>
    <dcterms:issued rdf:resource="rdf:#bb9f5581-0569-40d3-86a0-3c221b494fae"/>
    <bqs:last_page>940</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3885ead9-9d2f-469e-85b4-53a5722cc295">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>gnunns1@jhem.jhu.edu</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#433f14fa-595b-4027-825a-7c922b94d7d4">
    <vCard:Given>Ronney</vCard:Given>
    <vCard:Family>Panerai</vCard:Family>
    <vCard:Other>B</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="#panerai_1980">
    <bqs:reference rdf:resource="rdf:#bba658fb-dab1-46f5-9448-88acec5bbd97"/>
<bqs:reference rdf:parseType="Resource">
  <dc:subject rdf:parseType="Resource">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value>
      <rdf:Bag>
        <rdf:li>myofilament mechanics</rdf:li>
		<rdf:li>mechanical constitutive laws</rdf:li>
        <rdf:li>cardiac</rdf:li>
      </rdf:Bag>
    </rdf:value>
  </dc:subject>
</bqs:reference>
    <cmeta:comment rdf:resource="rdf:#b61beff8-ded2-4634-bab7-71f3e6636efe"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bba658fb-dab1-46f5-9448-88acec5bbd97">
    <bqs:Pubmed_id>7276000</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#77b9b3b2-4112-4cb6-9d8c-179cbed09487"/>
  </rdf:Description>
</rdf:RDF>
</model>