<?xml version="1.0"?>
<!--
This CellML file was generated on 18/07/2008 at 1:30:45 at p.m. using:

COR (0.9.31.979)
Copyright 2002-2008 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="razumova_bukatina_campbell_2000" name="razumova_bukatina_campbell_2000">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Different Myofilament Nearest-Neighbor Interactions Have Distinctive Effects on Contractile Behavior</title>
				<author>
					<firstname>Geoffrey</firstname>
					<surname>Nunns</surname>
					<affiliation>
						<shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This model runs in PCEnv and COR to recreate the published results. As described in the paper, this model simulates isometric conditions and has parameters for v,w, and u set to 1. This is the condition for no cooperativity, but changing these values allows for differing degrees of cooperativity. Ca activation is maximized, to mimic Table 2 in the paper.   
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
Abstract: Cooperativity in contractile behavior of myofilament systems almost assuredly arises because of interactions between neighboring sites. These interactions may be of different kinds. Tropomyosin thin-filament regulatory units may have neighbors in steric blocking positions (off) or steric permissive positions (on). The position of these neighbors influence the tendency for the regulatory unit to assume the on or off state. Likewise, the tendency of a myosin cross-bridge to achieve a force-bearing state may be influenced by whether neighboring cross-bridges are in force-bearing states. Also, a cross-bridge in the force-bearing state may influence the tendency of a regulatory unit to enter the on state. We used a mathematical model to examine the influence of each of these three kinds of neighbor interactions on the steady-state force-pCa relation and on the dynamic force redevelopment process. Each neighbor interaction was unique in its effects on maximal Ca2+-activated force, position, and symmetry of the force-pCa curve and on the Hill coefficient. Also, each neighbor interaction had a distinctive effect on the time course of force development as assessed by its rate coefficient, kdev. These diverse effects suggest that variations in all three kinds of nearest-neighbor interactions may be responsible for a wide variety of currently unexplained observations of myofilament contractile behavior..</para>
				<para>
				
<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="razumova_2000.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram of the Razumova et al model.  (Left) Eight-state cross-bridge activation and cycling model. A segment of the thin filament is represented by the chain of three circles. The thin-filament regulatory unit is represented by the bar associated with the 3-circle chain. The regulatory unit is in the on state when the bar is above the 3-circle chain and in the off state when the bar is below the chain. The myosin cross-bridge is represented by the shaded ellipse with the coiled tail. The cross-bridge may be detached (D) or attached (A1, A2) to the thin filament. In isometric conditions, force bearing is by the post-power stroke A2 state. Calcium is bound to the regulatory unit by all states on the left half of the left panel and not bound to all states on the right half of the left panel. Superscripts indicate calcium-binding status. See text for definitions and detailed explanations. (Right) Reduced 4-state representation of 8-state model. Calcium binding and dissociation is now contained within the calcium dependence of the kon(Ca) and koff(Ca) rate coefficients.</caption>
</informalfigure>				
				
The complete original paper reference is cited below:
</para>
				<para>
Different Myofilament Nearest-Neighbor Interactions Have Distinctive Effects on Contractile Behavior Maria V. Razumova, Anna E. Bukatina, Kenneth B. Campbell, 2000, <emphasis>Biophysical Journal</emphasis>
, 78, 3120-3137.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=10827989&amp;dopt=Abstract">PubMed ID: 10827989 </ulink>
				</para>
			</sect1>
		</article>
	</documentation>   <units name="per_second">
      <unit exponent="-1" units="second"/>
   </units>
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="second"/>
   </component>
   <component name="main">
      <variable name="F" units="dimensionless"/>
      <variable initial_value="1" name="R_T" units="dimensionless"/>
      <variable cmeta:id="main_R_off" name="R_off" units="dimensionless"/>
      <variable cmeta:id="main_D" initial_value="0" name="D" units="dimensionless"/>
      <variable cmeta:id="main_A_1" initial_value="0" name="A_1" units="dimensionless"/>
      <variable cmeta:id="main_A_2" initial_value="0" name="A_2" units="dimensionless"/>
      <variable name="lambda_off" units="dimensionless"/>
      <variable name="lambda_on" public_interface="out" units="dimensionless"/>
      <variable name="lambda_D" units="dimensionless"/>
      <variable name="lambda_A_1" units="dimensionless"/>
      <variable name="lambda_A_2" public_interface="out" units="dimensionless"/>
      <variable name="lambda_A2_cyc" units="dimensionless"/>
      <variable name="time" public_interface="in" units="second"/>
      <variable name="Ca" public_interface="out" units="dimensionless"/>
      <variable name="Ca_50" public_interface="out" units="dimensionless"/>
      <variable name="k_on" public_interface="in" units="per_second"/>
      <variable name="k_off" public_interface="in" units="per_second"/>
      <variable cmeta:id="main_k_0_on" initial_value="0" name="k_0_on" public_interface="out" units="per_second"/>
      <variable cmeta:id="main_k_0_off" initial_value="100" name="k_0_off" public_interface="out" units="per_second"/>
      <variable cmeta:id="main_k_Ca_on" initial_value="120" name="k_Ca_on" public_interface="out" units="per_second"/>
      <variable cmeta:id="main_k_Ca_off" initial_value="50" name="k_Ca_off" public_interface="out" units="per_second"/>
      <variable name="f" public_interface="in" units="per_second"/>
      <variable name="f_prime" public_interface="in" units="per_second"/>
      <variable initial_value="50" name="f_0" public_interface="out" units="per_second"/>
      <variable initial_value="400" name="f_prime_0" public_interface="out" units="per_second"/>
      <variable cmeta:id="main_h" initial_value="8" name="h" units="per_second"/>
      <variable cmeta:id="main_h_prime" initial_value="6" name="h_prime" units="per_second"/>
      <variable initial_value="4" name="g" units="per_second"/>
      <variable initial_value="1" name="n_H" units="dimensionless"/>
      <variable initial_value="1" name="u" public_interface="out" units="dimensionless"/>
      <variable initial_value="1" name="w" public_interface="out" units="dimensionless"/>
      <variable initial_value="1" name="v" public_interface="out" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>R_off</ci>
            <apply>
               <minus/>
               <ci>R_T</ci>
               <apply>
                  <plus/>
                  <ci>D</ci>
                  <ci>A_1</ci>
                  <ci>A_2</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>D</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>k_on</ci>
                     <ci>R_off</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>f_prime</ci>
                     <ci>A_1</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>g</ci>
                     <ci>A_2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <ci>k_off</ci>
                     <ci>f</ci>
                  </apply>
                  <ci>D</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>A_1</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>f</ci>
                     <ci>D</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>h_prime</ci>
                     <ci>A_2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <ci>f_prime</ci>
                     <ci>h</ci>
                  </apply>
                  <ci>A_1</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>A_2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>h</ci>
                  <ci>A_1</ci>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <ci>h_prime</ci>
                     <ci>g</ci>
                  </apply>
                  <ci>A_2</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>lambda_off</ci>
            <apply>
               <divide/>
               <ci>R_off</ci>
               <ci>R_T</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>lambda_on</ci>
            <apply>
               <divide/>
               <apply>
                  <plus/>
                  <ci>D</ci>
                  <ci>A_1</ci>
                  <ci>A_2</ci>
               </apply>
               <ci>R_T</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>lambda_D</ci>
            <apply>
               <divide/>
               <ci>D</ci>
               <ci>R_T</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>lambda_A_1</ci>
            <apply>
               <divide/>
               <ci>A_1</ci>
               <ci>R_T</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>lambda_A_2</ci>
            <apply>
               <divide/>
               <ci>A_2</ci>
               <ci>R_T</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>lambda_A2_cyc</ci>
            <apply>
               <divide/>
               <ci>A_2</ci>
               <apply>
                  <plus/>
                  <ci>D</ci>
                  <ci>A_1</ci>
                  <ci>A_2</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>Ca</ci>
            <apply>
               <times/>
               <ci>Ca_50</ci>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">100</cn>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>Ca_50</ci>
            <apply>
               <divide/>
               <ci>k_Ca_off</ci>
               <ci>k_Ca_on</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>F</ci>
            <apply>
               <divide/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <power/>
                     <apply>
                        <divide/>
                        <ci>Ca</ci>
                        <ci>Ca_50</ci>
                     </apply>
                     <apply>
                        <minus/>
                        <ci>n_H</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="RU_rate_constant">
      <variable name="k_u_on" public_interface="out" units="per_second"/>
      <variable name="k_u_off" public_interface="out" units="per_second"/>
      <variable name="k_0_on" public_interface="in" units="per_second"/>
      <variable name="k_0_off" public_interface="in" units="per_second"/>
      <variable name="k_Ca_on" public_interface="in" units="per_second"/>
      <variable name="k_Ca_off" public_interface="in" units="per_second"/>
      <variable name="Ca" public_interface="in" units="dimensionless"/>
      <variable name="Ca_50" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>k_u_on</ci>
            <apply>
               <plus/>
               <ci>k_0_on</ci>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>k_Ca_on</ci>
                        <ci>k_0_on</ci>
                     </apply>
                     <ci>Ca</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>Ca_50</ci>
                     <ci>Ca</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>k_u_off</ci>
            <apply>
               <plus/>
               <ci>k_0_off</ci>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>k_Ca_off</ci>
                        <ci>k_0_off</ci>
                     </apply>
                     <ci>Ca</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>Ca_50</ci>
                     <ci>Ca</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="RU_RU_interaction">
      <variable name="k_w_on" public_interface="out" units="per_second"/>
      <variable name="k_w_off" public_interface="out" units="per_second"/>
      <variable name="k_u_on" public_interface="in" units="per_second"/>
      <variable name="k_u_off" public_interface="in" units="per_second"/>
      <variable name="lambda_on" public_interface="in" units="dimensionless"/>
      <variable name="u" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>k_w_on</ci>
            <apply>
               <times/>
               <ci>k_u_on</ci>
               <apply>
                  <power/>
                  <apply>
                     <plus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <apply>
                        <times/>
                        <ci>lambda_on</ci>
                        <apply>
                           <minus/>
                           <ci>u</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                        </apply>
                     </apply>
                  </apply>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>k_w_off</ci>
            <apply>
               <times/>
               <ci>k_u_off</ci>
               <apply>
                  <power/>
                  <apply>
                     <minus/>
                     <ci>u</ci>
                     <apply>
                        <times/>
                        <ci>lambda_on</ci>
                        <apply>
                           <minus/>
                           <ci>u</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                        </apply>
                     </apply>
                  </apply>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="XB_XB_interaction">
      <variable cmeta:id="XB_XB_interaction_f" name="f" public_interface="out" units="per_second"/>
      <variable cmeta:id="XB_XB_interaction_f_prime" name="f_prime" public_interface="out" units="per_second"/>
      <variable name="f_0" public_interface="in" units="per_second"/>
      <variable name="f_prime_0" public_interface="in" units="per_second"/>
      <variable name="lambda_A_2" public_interface="in" units="dimensionless"/>
      <variable name="v" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>f</ci>
            <apply>
               <times/>
               <ci>f_0</ci>
               <apply>
                  <power/>
                  <apply>
                     <plus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <apply>
                        <times/>
                        <ci>lambda_A_2</ci>
                        <apply>
                           <minus/>
                           <apply>
                              <exp/>
                              <apply>
                                 <minus/>
                                 <ci>v</ci>
                                 <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                              </apply>
                           </apply>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                        </apply>
                     </apply>
                  </apply>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>f_prime</ci>
            <apply>
               <times/>
               <ci>f_prime_0</ci>
               <apply>
                  <power/>
                  <apply>
                     <plus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <apply>
                        <times/>
                        <ci>lambda_A_2</ci>
                        <apply>
                           <minus/>
                           <apply>
                              <exp/>
                              <apply>
                                 <minus/>
                                 <apply>
                                    <minus/>
                                    <ci>v</ci>
                                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                                 </apply>
                              </apply>
                           </apply>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                        </apply>
                     </apply>
                  </apply>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="XB_RU_interaction">
      <variable cmeta:id="XB_RU_interaction_k_on" name="k_on" public_interface="out" units="per_second"/>
      <variable cmeta:id="XB_RU_interaction_k_off" name="k_off" public_interface="out" units="per_second"/>
      <variable name="k_w_on" public_interface="in" units="per_second"/>
      <variable name="k_w_off" public_interface="in" units="per_second"/>
      <variable name="lambda_A_2" public_interface="in" units="dimensionless"/>
      <variable name="w" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>k_on</ci>
            <apply>
               <times/>
               <ci>k_w_on</ci>
               <apply>
                  <power/>
                  <apply>
                     <plus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <apply>
                        <times/>
                        <ci>lambda_A_2</ci>
                        <apply>
                           <minus/>
                           <apply>
                              <exp/>
                              <apply>
                                 <minus/>
                                 <ci>w</ci>
                                 <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                              </apply>
                           </apply>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                        </apply>
                     </apply>
                  </apply>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>k_off</ci>
            <apply>
               <times/>
               <ci>k_w_off</ci>
               <apply>
                  <power/>
                  <apply>
                     <plus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <apply>
                        <times/>
                        <ci>lambda_A_2</ci>
                        <apply>
                           <minus/>
                           <apply>
                              <exp/>
                              <apply>
                                 <minus/>
                                 <apply>
                                    <minus/>
                                    <ci>w</ci>
                                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                                 </apply>
                              </apply>
                           </apply>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                        </apply>
                     </apply>
                  </apply>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="environment" component_2="main"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="main" component_2="RU_rate_constant"/>
      <map_variables variable_1="k_0_on" variable_2="k_0_on"/>
      <map_variables variable_1="k_0_off" variable_2="k_0_off"/>
      <map_variables variable_1="k_Ca_on" variable_2="k_Ca_on"/>
      <map_variables variable_1="k_Ca_off" variable_2="k_Ca_off"/>
      <map_variables variable_1="Ca" variable_2="Ca"/>
      <map_variables variable_1="Ca_50" variable_2="Ca_50"/>
   </connection>
   <connection>
      <map_components component_1="main" component_2="RU_RU_interaction"/>
      <map_variables variable_1="lambda_on" variable_2="lambda_on"/>
      <map_variables variable_1="u" variable_2="u"/>
   </connection>
   <connection>
      <map_components component_1="main" component_2="XB_XB_interaction"/>
      <map_variables variable_1="f" variable_2="f"/>
      <map_variables variable_1="f_prime" variable_2="f_prime"/>
      <map_variables variable_1="f_0" variable_2="f_0"/>
      <map_variables variable_1="f_prime_0" variable_2="f_prime_0"/>
      <map_variables variable_1="lambda_A_2" variable_2="lambda_A_2"/>
      <map_variables variable_1="v" variable_2="v"/>
   </connection>
   <connection>
      <map_components component_1="main" component_2="XB_RU_interaction"/>
      <map_variables variable_1="k_on" variable_2="k_on"/>
      <map_variables variable_1="k_off" variable_2="k_off"/>
      <map_variables variable_1="lambda_A_2" variable_2="lambda_A_2"/>
      <map_variables variable_1="w" variable_2="w"/>
   </connection>
   <connection>
      <map_components component_1="RU_rate_constant" component_2="RU_RU_interaction"/>
      <map_variables variable_1="k_u_on" variable_2="k_u_on"/>
      <map_variables variable_1="k_u_off" variable_2="k_u_off"/>
   </connection>
   <connection>
      <map_components component_1="RU_RU_interaction" component_2="XB_RU_interaction"/>
      <map_variables variable_1="k_w_on" variable_2="k_w_on"/>
      <map_variables variable_1="k_w_off" variable_2="k_w_off"/>
   </connection>


<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
<rdf:Description rdf:about="rdf:#e11ca7f1-55e0-43a9-8d80-215d204b8a02">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#8679da0d-5fc5-4c21-9d87-fb4d950ed451"/>
</creator>
<rdf:value xml:lang="en">This model runs in PCEnv and COR to recreate the published results. As described in the paper, this model simulates isometric conditions and has parameters for v,w, and u set to 1. This is the condition for no cooperativity, but changing these values allows for differing degrees of cooperativity. Ca activation is maximized, to mimic Table 2 in the paper.</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#bc80bccf-fb52-4220-989c-414a6c0b0d13">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Biophysical Journal</title>
</rdf:Description>
<rdf:Description rdf:about="rdf:#d619dd2d-4def-4675-a3f8-459ac446007f">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#c8df646d-1921-48b2-9638-7d18d3a43ac4"/>
</creator>
<rdf:value xml:lang="en">This model runs in PCEnv and COR to recreate the published results. As described in the paper, this model simulates isometric conditions and has parameters for v,w, and u set to 1. This is the condition for no cooperativity, but changing these values allows for differing degrees of cooperativity. Ca activation is maximized, to mimic Table 2 in the paper.</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#e6e7928f-b67f-4436-a06b-da33293b4a7a"/>
</creator>
<created xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#076846f1-4962-4d3f-9d81-1207b23a0681"/>
</created>
<cmeta:comment>
<rdf:Description rdf:about="rdf:#e11ca7f1-55e0-43a9-8d80-215d204b8a02"/>
</cmeta:comment>
<publisher xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en"></publisher>
<cmeta:modification>
<rdf:Description rdf:about="rdf:#3ee141c7-b1b3-4c5d-aa06-93c41a096007"/>
</cmeta:modification>
</rdf:Description>
<rdf:Description rdf:about="#razumova_bukatina_campbell_2000">
<cmeta:comment>
<rdf:Description rdf:about="rdf:#6e857f4f-c67d-4489-a1a0-336a71915724"/>
</cmeta:comment>
<simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:about="rdf:#$U.RgH1"/>
</simulation>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n1"/>
</reference>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#f971633a-8748-43db-bd4a-6682a7b30f7e"/>
</reference>
</rdf:Description>
<rdf:Description rdf:nodeID="n2">
<subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type>
<rdf:value>
<rdf:Description rdf:nodeID="n3"/>
</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#65f131fd-9913-4aa0-b10e-8900bbcfcbe3">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#f7871644-4c2f-46ee-9169-2b3077c9416a"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#6e38d6cb-6ecd-48ac-bcf8-cdbfaac7d92e">
<FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Geoff Nunns</FN>
</rdf:Description>
<rdf:Description rdf:about="rdf:#867b2de1-1a1d-4703-b824-0c496765af92">
<volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">78</volume>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Different Myofilament Nearest-Neighbor Interactions Have Distinctive Effects on Contractile Behavior</title>
<Journal xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#bc80bccf-fb52-4220-989c-414a6c0b0d13"/>
</Journal>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#de1f5330-30d5-4c22-af31-a1fe9a60da4d"/>
</creator>
<last_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">3137</last_page>
<first_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">3120</first_page>
<issued xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#dd32435a-3088-4f03-9237-66586a713afe"/>
</issued>
</rdf:Description>
<rdf:Description rdf:about="rdf:#de1f5330-30d5-4c22-af31-a1fe9a60da4d">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
</rdf:type>
<rdf:_2>
<rdf:Description rdf:about="rdf:#7d876f43-098c-47c0-803d-22844edaace9"/>
</rdf:_2>
<rdf:_1>
<rdf:Description rdf:about="rdf:#94843138-13d6-4db0-a560-1d51a7cecbb5"/>
</rdf:_1>
<rdf:_3>
<rdf:Description rdf:about="rdf:#43358aae-a565-4cc4-94f0-c8b4f115f93a"/>
</rdf:_3>
</rdf:Description>
<rdf:Description rdf:about="rdf:#94843138-13d6-4db0-a560-1d51a7cecbb5">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#a91aa5e4-cd6c-4d2d-895f-9dc597a514c2"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#e6e7928f-b67f-4436-a06b-da33293b4a7a">
<EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#df9d9cc9-3ba0-4e01-9c20-327cc79c78c6"/>
</EMAIL>
<ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#fca24fd8-99d2-4c05-ac1e-34607d7b1b4b"/>
</ORG>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#aea6406b-d92f-466f-96d8-ddc5ef6c2122"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#c4f9d139-f941-4035-9112-a1d5e21e11d1">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2008-07-21T13:28:34+12:00</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#$U.RgH1">
<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:about="rdf:#$V.RgH1"/>
</boundIntervals>
</rdf:Description>
<rdf:Description rdf:about="rdf:#fca24fd8-99d2-4c05-ac1e-34607d7b1b4b">
<Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">CellML Team</Orgunit>
<Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Auckland Bioengineering Institute</Orgname>
</rdf:Description>
<rdf:Description rdf:about="rdf:#3dd86242-8a76-4111-b372-301235c38ce7">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Kenneth</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Campbell</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">B</Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#f7871644-4c2f-46ee-9169-2b3077c9416a">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Geoffrey</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Nunns</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Rogan</Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#f971633a-8748-43db-bd4a-6682a7b30f7e">
<Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">10827989</Pubmed_id>
<JournalArticle xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#867b2de1-1a1d-4703-b824-0c496765af92"/>
</JournalArticle>
</rdf:Description>
<rdf:Description rdf:about="rdf:#aea6406b-d92f-466f-96d8-ddc5ef6c2122">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Geoffrey</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Nunns</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Rogan</Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#$W.RgH1">
<algorithm xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">bdf15</algorithm>
<maximumStepSize xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">0.0001</maximumStepSize>
<pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">100000</pointDensity>
<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">0.5</endingValue>
</rdf:Description>
<rdf:Description rdf:about="rdf:#6e857f4f-c67d-4489-a1a0-336a71915724">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#6e38d6cb-6ecd-48ac-bcf8-cdbfaac7d92e"/>
</creator>
<rdf:value xml:lang="en">This model runs in PCEnv and COR to recreate the published results. As described in the paper, this model simulates isometric conditions and has parameters for v,w, and u set to 1. This is the condition for no cooperativity, but changing these values allows for differing degrees of cooperativity. Ca activation is maximized, to mimic Table 2 in the paper.</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#f918949e-581d-4ba7-b7c0-fd6552b234a4">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Anna</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Bukatina</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">E</Other>
</rdf:Description>
<rdf:Description rdf:nodeID="n3">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/>
</rdf:type>
<rdf:_1 xml:lang="en">myofilament mechanics</rdf:_1>
</rdf:Description>
<rdf:Description rdf:about="rdf:#dd32435a-3088-4f03-9237-66586a713afe">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2000-06-00 00:00</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#a91aa5e4-cd6c-4d2d-895f-9dc597a514c2">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Maria</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Razumova</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">V</Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#c8df646d-1921-48b2-9638-7d18d3a43ac4">
<FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Geoff Nunns</FN>
</rdf:Description>
<rdf:Description rdf:nodeID="n1">
<subject xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n2"/>
</subject>
</rdf:Description>
<rdf:Description rdf:about="rdf:#076846f1-4962-4d3f-9d81-1207b23a0681">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2008-07-16T00:00:00+00:00</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#7d876f43-098c-47c0-803d-22844edaace9">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#f918949e-581d-4ba7-b7c0-fd6552b234a4"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#43358aae-a565-4cc4-94f0-c8b4f115f93a">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#3dd86242-8a76-4111-b372-301235c38ce7"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#8679da0d-5fc5-4c21-9d87-fb4d950ed451">
<FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Geoff Nunns</FN>
</rdf:Description>
<rdf:Description rdf:about="rdf:#$V.RgH1">
<rdf:first>
<rdf:Description rdf:about="rdf:#$W.RgH1"/>
</rdf:first>
<rdf:rest>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
</rdf:rest>
</rdf:Description>
<rdf:Description rdf:about="rdf:#3ee141c7-b1b3-4c5d-aa06-93c41a096007">
<rdf:value xml:lang="en">Updated cmeta ids for use by session files</rdf:value>
<cmeta:modifier>
<rdf:Description rdf:about="rdf:#65f131fd-9913-4aa0-b10e-8900bbcfcbe3"/>
</cmeta:modifier>
<modified xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#c4f9d139-f941-4035-9112-a1d5e21e11d1"/>
</modified>
</rdf:Description>
<rdf:Description rdf:about="rdf:#df9d9cc9-3ba0-4e01-9c20-327cc79c78c6">
<rdf:type>
<rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/>
</rdf:type>
<rdf:value xml:lang="en">gnunns1@jhem.jhu.edu</rdf:value>
</rdf:Description>
</rdf:RDF>
</model>