// creator: Given Catherine; Family Lloyd; Other May; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz
// publisher: Auckland Bioengineering Institute
// created: W3CDTF 2009-08-20T00:00:00+00:00
// simulation: endingValue 1000; pointDensity 100000; maximumStepSize 0.01
// reference: Given Liev; Family Oyehaug; Given Ivar; Family Ostby; Given Catherine; Family Lloyd; Given Stig; Family Omholt; Given Gaute; Family Einevoll; title Dependence of spontaneous neuronal firing and depolarization block on astroglial membrane processes: Fig 2A; W3CDTF 2011-04
// reference: _1 electrophysiology; _2 neurobiology; _3 astroglia; subject_type keyword
def model oyehaug_2009 as
  // Dependence of spontaneous neuronal firing and depolarization block on astroglial membrane processes
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute
  //
  // Model Status
  //
  // This CellML model is a tranlsation based on the orignal paper and Matlab code. The model runs in both COR and OpenCell to recreate the published results. This particular version of the model recreates Figure 2A, with a stimulus duration of 0.6s.
  //
  // Model Structure
  //
  // ABSTRACT: Exposed to a sufficiently high extracellular potassium concentration ([K+ ]o ), the neuron can fire spontaneous discharges or even become inactivated due to membrane depolarization ('depolarization block'). Since these phenomena likely are related to the maintenance and propagation of seizure discharges, it is of considerable importance to understand the conditions under which excess [K+ ]o causes them. To address the putative effect of glial buffering on neuronal activity under elevated [K+]o conditions, we combined a recently developed dynamical model of glial membrane water and ion transport with a Hodgkin-Huxley type neuron model. In this interconnected astroglia-neuron model we investigated the effects of natural heterogeneity or pathological changes in glial membrane transporter density by considering a large set of models with different, yet empirically plausible, sets of model parameters. We observed both the high [K+]o -induced duration of spontaneous neuronal firing and the prevalence of depolarization block to increase when reducing the magnitudes of the glial transport mechanisms. Further, in some parameter regions an oscillatory bursting spiking pattern due to the dynamical coupling of neurons and glia was observed. Bifurcation analyses of the neuron model and of a simplified version of the neuron-glia model revealed further insights about the underlying mechanism behind these phenomena. The above insights emphasise the importance of combining neuron models with detailed astroglial models when addressing phenomena suspected to be influenced by the astroglia-neuron interaction. To facilitate the use of our neuron-glia model, a CellML version of it is made publicly available.
  //
  // Schematic diagram of the model displaying the channels, pumps and exchangers allowing ion transfer between the neuron, the extracellular matrix and the glia.
  //
  // The original paper reference is cited below:
  //
  // Dependence of spontaneous neuronal firing and depolarization block on astroglial membrane processes, Leiv Oyehaug, Ivar Ostby, Catherine M. Lloyd, Stog W. Omholt, and Gaute T. Einevoll, 2011, Journal of Computational Neuroscience.
  // Vm_n
  //
  // neuron membrane potential
  // i_NaT
  //
  // transient sodium current
  // i_NaP
  //
  // persistent sodium current
  // i_KDR
  //
  // delayed rectifier potassium current
  // i_KA
  //
  // transient potassium current
  // i_NaKATPase_n
  //
  // neuron sodium-potassium pump
  // i_leakNa
  //
  // sodium leak current
  // i_leakK
  //
  // potassium leak current
  // i_leakf
  //
  // unspecified ion leak current
  // Vm_g
  //
  // glial membrane potential
  // J_Na
  //
  // glial transmembrane sodium ion flux
  // J_K
  //
  // glial transmembrane potassium ion flux
  // J_NaKATPase_g
  //
  // glial transmembrane sodium-potassium ion flux via the NaK pump
  // J_NBC
  //
  // glial transmembrane sodium and bicarbonate ion flux via the NBC cotransporter
  // J_NKCC1
  //
  // glial transmembrane sodium potassium and chloride ion flux via the NKCC1 cotransporter
  // N_Nag
  //
  // number of sodium ions per unit glial area
  // N_Kg
  //
  // number of potassium ions per unit glial area
  // wg
  //
  // ratio of glial volume to glial area
  // wo
  //
  // extracellular space volume to area ratio
  // N_Nao
  //
  // number of sodium ions in the extracellular space
  // N_Ko
  //
  // number of potassium ions in the extracellular space
  // N_HCO3o
  //
  // number of bicarbonate ions in the extracellular space
  // electric_potentials
  //
  // electric potentials
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit per_millisecond_millivolt as
    unit millisecond {expo: -1};
    unit millivolt {expo: -1};
  enddef;
  def unit microS_per_cm2 as
    unit siemens {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit cm2 as
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit nanoA_per_cm2 as
    unit ampere {pref: nano};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit millimolar_per_nanoA_second as
    unit millimolar;
    unit ampere {expo: -1, pref: nano};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_microA_second as
    unit millimolar;
    unit ampere {expo: -1, pref: micro};
    unit second {expo: -1};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_micrometre as
    unit millimolar;
    unit micrometre;
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit mole_per_cm2_second as
    unit mole;
    unit metre {expo: -2, pref: centi};
    unit second {expo: -1};
  enddef;
  def unit cm_per_second_millimolar as
    unit metre {pref: centi};
    unit second {expo: -1};
    unit millimolar {expo: -1};
  enddef;
  def unit micrometre_cm2 as
    unit metre {pref: micro};
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit millimolar_per_cm2 as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit picomole_per_cm2_millisecond as
    unit mole {pref: pico};
    unit metre {expo: -2, pref: centi};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit nanomole_per_cm2 as
    unit mole {pref: nano};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit nanomole_per_cm2_millisecond as
    unit mole {pref: nano};
    unit metre {expo: -2, pref: centi};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit cm2_micrometre as
    unit metre {expo: 2, pref: centi};
    unit metre {pref: micro};
  enddef;
  def unit micrometre_per_centimetre as
    unit metre {pref: micro};
    unit metre {expo: -1, pref: centi};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp Vm_n as
    var Vm_n: millivolt {init: -70, pub: out};
    var i_app: nanoA_per_cm2;
    var Cm: microF_per_cm2 {init: 1};
    var t0: millisecond {init: 100};
    var t1: millisecond {init: 700};
    var time: millisecond {pub: in};
    var i_NaT: nanoA_per_cm2 {pub: in};
    var i_NaP: nanoA_per_cm2 {pub: in};
    var i_leakNa: nanoA_per_cm2 {pub: in};
    var i_KDR: nanoA_per_cm2 {pub: in};
    var i_KA: nanoA_per_cm2 {pub: in};
    var i_leakK: nanoA_per_cm2 {pub: in};
    var i_leakf: nanoA_per_cm2 {pub: in};
    var i_NaKATPase_n: nanoA_per_cm2 {pub: in};
    ode(Vm_n, time) = 0.001{dimensionless}*(-(i_NaT+i_NaP+i_leakNa+i_KDR+i_KA+i_leakK+i_leakf+i_NaKATPase_n)+i_app)/Cm;
    i_app = sel
      case (time >= t0) and (time <= t1):
        3500{nanoA_per_cm2};
      otherwise:
        0{nanoA_per_cm2};
    endsel;
  enddef;

  def comp i_NaT as
    var i_NaT: nanoA_per_cm2 {pub: out};
    var J_NaT: picomole_per_cm2_millisecond {pub: out};
    var gNaT: microS_per_cm2 {init: 5000};
    var F: coulomb_per_mole {pub: in};
    var ENa_n: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var Vm_n: millivolt {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    i_NaT = gNaT*pow(m, 3{dimensionless})*h*(Vm_n-ENa_n);
    J_NaT = gNaT*pow(m, 3{dimensionless})*h*(Vm_n-ENa_n)/F;
  enddef;

  def comp i_NaT_m_gate as
    var m: dimensionless {init: 0.005, pub: out};
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    var Vm_n: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = 0.32{per_millisecond_millivolt}*(-Vm_n-51.9{millivolt})/(exp(-(0.25{per_millivolt}*Vm_n+12.975{dimensionless}))-1{dimensionless});
    beta_m = 0.28{per_millisecond_millivolt}*(Vm_n+24.89{millivolt})/(exp(0.2{per_millivolt}*Vm_n+4.978{dimensionless})-1{dimensionless});
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp i_NaT_h_gate as
    var h: dimensionless {init: 0.9961, pub: out};
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var Vm_n: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = 0.128{per_millisecond}*exp(-(0.056{per_millivolt}*Vm_n+2.94{dimensionless}));
    beta_h = 4{per_millisecond}/(exp(-(0.2{per_millivolt}*Vm_n+6{dimensionless}))+1{dimensionless});
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp i_NaP as
    var i_NaP: nanoA_per_cm2 {pub: out};
    var J_NaP: picomole_per_cm2_millisecond {pub: out};
    var gNaP: microS_per_cm2 {init: 150};
    var F: coulomb_per_mole {pub: in};
    var ENa_n: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var Vm_n: millivolt {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    i_NaP = gNaP*sqr(m)*h*(Vm_n-ENa_n);
    J_NaP = gNaP*sqr(m)*h*(Vm_n-ENa_n)/F;
  enddef;

  def comp i_NaP_m_gate as
    var m: dimensionless {init: 0.0129, pub: out};
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    var tau_activation: millisecond {init: 6};
    var Vm_n: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = 1{dimensionless}/tau_activation*1{dimensionless}/(exp(-(0.143{per_millivolt}*Vm_n+5.67{dimensionless}))+1{dimensionless});
    beta_m = 1{dimensionless}/tau_activation*exp(-(0.143{per_millivolt}*Vm_n+5.67{dimensionless}))/(exp(-(0.143{per_millivolt}*Vm_n+5.67{dimensionless}))+1{dimensionless});
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp i_NaP_h_gate as
    var h: dimensionless {init: 0.9718, pub: out};
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var Vm_n: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = 5.12e-8{per_millisecond}*exp(-(0.056{per_millivolt}*Vm_n+2.94{dimensionless}));
    beta_h = 1.6e-6{per_millisecond}/(exp(-(0.2{per_millivolt}*Vm_n+8{dimensionless}))+1{dimensionless});
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp i_KDR as
    var i_KDR: nanoA_per_cm2 {pub: out};
    var J_KDR: picomole_per_cm2_millisecond {pub: out};
    var gKDR: microS_per_cm2 {init: 5000};
    var F: coulomb_per_mole {pub: in};
    var EK_n: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var Vm_n: millivolt {priv: out, pub: in};
    var n: dimensionless {priv: in};
    i_KDR = gKDR*sqr(n)*(Vm_n-EK_n);
    J_KDR = gKDR*sqr(n)*(Vm_n-EK_n)/F;
  enddef;

  def comp i_KDR_n_gate as
    var n: dimensionless {init: 0.0012, pub: out};
    var alpha_n: per_millisecond;
    var beta_n: per_millisecond;
    var Vm_n: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_n = 0.016{per_millisecond_millivolt}*(-Vm_n-34.9{millivolt})/(exp(-(0.2{per_millivolt}*Vm_n+6.98{dimensionless}))-1{dimensionless});
    beta_n = 0.25{per_millisecond}*exp(-(0.025{per_millivolt}*Vm_n+1.25{dimensionless}));
    ode(n, time) = alpha_n*(1{dimensionless}-n)-beta_n*n;
  enddef;

  def comp i_KA as
    var i_KA: nanoA_per_cm2 {pub: out};
    var J_KA: picomole_per_cm2_millisecond {pub: out};
    var gKA: microS_per_cm2 {init: 1000};
    var F: coulomb_per_mole {pub: in};
    var EK_n: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var Vm_n: millivolt {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    i_KA = gKA*sqr(m)*h*(Vm_n-EK_n);
    J_KA = gKA*sqr(m)*h*(Vm_n-EK_n)/F;
  enddef;

  def comp i_KA_m_gate as
    var m: dimensionless {init: 0.1193, pub: out};
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    var Vm_n: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = 0.02{per_millisecond_millivolt}*(-Vm_n-56.9{millivolt})/(exp(-(0.1{per_millivolt}*Vm_n+5.69{dimensionless}))-1{dimensionless});
    beta_m = 0.0175{per_millisecond_millivolt}*(Vm_n+29.9{millivolt})/(exp(0.1{per_millivolt}*Vm_n+2.99{dimensionless})-1{dimensionless});
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp i_KA_h_gate as
    var h: dimensionless {init: 0.1205, pub: out};
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var Vm_n: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = 0.016{per_millisecond}*exp(-(0.056{per_millivolt}*Vm_n+4.61{dimensionless}));
    beta_h = 0.5{per_millisecond}/(exp(-(0.2{per_millivolt}*Vm_n+11.98{dimensionless}))+1{dimensionless});
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp i_NaKATPase_n as
    var i_NaKATPase_n: nanoA_per_cm2 {pub: out};
    var J_NaKATPase_n: picomole_per_cm2_millisecond {pub: out};
    var I_NaKATPase_n_max: picomole_per_cm2_millisecond {init: 0.0289};
    var F: coulomb_per_mole {pub: in};
    var KmNa: millimolar {pub: in};
    var KmK: millimolar {pub: in};
    var Nan: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    i_NaKATPase_n = J_NaKATPase_n*F;
    J_NaKATPase_n = I_NaKATPase_n_max*pow(Nan, 1.5{dimensionless})/(pow(Nan, 1.5{dimensionless})+pow(KmNa, 1.5{dimensionless}))*Ko/(Ko+KmK);
  enddef;

  def comp i_leakNa as
    var i_leakNa: nanoA_per_cm2 {pub: out};
    var J_leakNa: picomole_per_cm2_millisecond {pub: out};
    var gleakNa: microS_per_cm2 {init: 20};
    var F: coulomb_per_mole {pub: in};
    var ENa_n: millivolt {pub: in};
    var Vm_n: millivolt {pub: in};
    i_leakNa = gleakNa*(Vm_n-ENa_n);
    J_leakNa = gleakNa*(Vm_n-ENa_n)/F;
  enddef;

  def comp i_leakK as
    var i_leakK: nanoA_per_cm2 {pub: out};
    var J_leakK: picomole_per_cm2_millisecond {pub: out};
    var gleakK: microS_per_cm2 {init: 66.06};
    var F: coulomb_per_mole {pub: in};
    var EK_n: millivolt {pub: in};
    var Vm_n: millivolt {pub: in};
    i_leakK = gleakK*(Vm_n-EK_n);
    J_leakK = gleakK*(Vm_n-EK_n)/F;
  enddef;

  def comp i_leakf as
    var i_leakf: nanoA_per_cm2 {pub: out};
    var gleakf: microS_per_cm2 {init: 10};
    var Ef_n: millivolt {pub: in};
    var Vm_n: millivolt {pub: in};
    i_leakf = gleakf*(Vm_n-Ef_n);
  enddef;

  def comp Vm_g as
    var Vm_g: millivolt {pub: out};
    var F: coulomb_per_mole {pub: in};
    var ENa_g: millivolt {pub: in};
    var EK_g: millivolt {pub: in};
    var ECl_g: millivolt {pub: in};
    var ENBC_g: millivolt {pub: in};
    var gNa: microS_per_cm2 {pub: in};
    var gK: microS_per_cm2 {pub: in};
    var gCl: microS_per_cm2 {pub: in};
    var gNBC: microS_per_cm2 {pub: in};
    var J_NaKATPase_g: picomole_per_cm2_millisecond {pub: in};
    Vm_g = (gNa*ENa_g+gK*EK_g+gCl*ECl_g+gNBC*ENBC_g)/(gNa+gK+gCl+gNBC)-F*J_NaKATPase_g/(gNa+gK+gCl+gNBC);
  enddef;

  def comp J_Na as
    var J_Na: picomole_per_cm2_millisecond {pub: out};
    var gNa: microS_per_cm2 {init: 100.0, pub: out};
    var F: coulomb_per_mole {pub: in};
    var ENa_g: millivolt {pub: in};
    var Vm_g: millivolt {pub: in};
    J_Na = gNa*(Vm_g-ENa_g)/F;
  enddef;

  def comp J_K as
    var J_K: picomole_per_cm2_millisecond {pub: out};
    var gK: microS_per_cm2 {init: 1696.0, pub: out};
    var F: coulomb_per_mole {pub: in};
    var EK_g: millivolt {pub: in};
    var Vm_g: millivolt {pub: in};
    J_K = gK*(Vm_g-EK_g)/F;
  enddef;

  def comp J_NaKATPase_g as
    var J_NaKATPase_g: picomole_per_cm2_millisecond {pub: out};
    var I_NaKATPase_g_max: picomole_per_cm2_millisecond {init: 0.1151};
    var KmNa: millimolar {pub: in};
    var KmK: millimolar {pub: in};
    var Nag: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    J_NaKATPase_g = I_NaKATPase_g_max*pow(Nag, 1.5{dimensionless})/(pow(Nag, 1.5{dimensionless})+pow(KmNa, 1.5{dimensionless}))*Ko/(Ko+KmK);
  enddef;

  def comp J_NBC as
    var J_NBC: picomole_per_cm2_millisecond {pub: out};
    var gNBC: microS_per_cm2 {init: 80, pub: out};
    var F: coulomb_per_mole {pub: in};
    var ENBC_g: millivolt {pub: in};
    var Vm_g: millivolt {pub: in};
    J_NBC = gNBC*(Vm_g-ENBC_g)/F;
  enddef;

  def comp J_NKCC1 as
    var J_NKCC1: picomole_per_cm2_millisecond {pub: out};
    var gNKCC1: microS_per_cm2 {init: 2};
    var Psi: millivolt {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nao: millimolar {pub: in};
    var Nag: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var P_Ko: millimolar {pub: in};
    var Kg: millimolar {pub: in};
    var Clo: millimolar {pub: in};
    var Clg: millimolar {pub: in};
    J_NKCC1 = sel
      case Ko > P_Ko:
        pow(Ko-P_Ko, 10{dimensionless})/(pow(Ko-P_Ko, 10{dimensionless})+pow(0.03{millimolar}, 10{dimensionless}))*Psi*gNKCC1*ln(Ko/Kg*Nao/Nag*sqr(Clo/Clg))/F;
      otherwise:
        0{picomole_per_cm2_millisecond};
    endsel;
  enddef;

  def comp N_Nag as
    var N_Nag: nanomole_per_cm2 {init: 0.75, pub: out};
    var dN_Nag_dt: nanomole_per_cm2_millisecond {pub: out};
    var J_Na: picomole_per_cm2_millisecond {pub: in};
    var J_NaKATPase_g: picomole_per_cm2_millisecond {pub: in};
    var J_NKCC1: picomole_per_cm2_millisecond {pub: in};
    var J_NBC: picomole_per_cm2_millisecond {pub: in};
    var time: millisecond {pub: in};
    ode(N_Nag, time) = dN_Nag_dt;
    dN_Nag_dt = 0.01{dimensionless}*(-J_Na-3{dimensionless}*J_NaKATPase_g+J_NKCC1+J_NBC);
  enddef;

  def comp N_Kg as
    var N_Kg: nanomole_per_cm2 {init: 5, pub: out};
    var dN_Kg_dt: nanomole_per_cm2_millisecond {pub: out};
    var J_K: picomole_per_cm2_millisecond {pub: in};
    var J_NaKATPase_g: picomole_per_cm2_millisecond {pub: in};
    var J_NKCC1: picomole_per_cm2_millisecond {pub: in};
    var time: millisecond {pub: in};
    ode(N_Kg, time) = dN_Kg_dt;
    dN_Kg_dt = 0.01{dimensionless}*(-J_K+2{dimensionless}*J_NaKATPase_g+J_NKCC1);
  enddef;

  def comp wg as
    var wg: micrometre {init: 0.05, pub: out};
    var Lp: cm_per_second_millimolar {pub: in};
    var Xg: millimolar_micrometre {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Clo: millimolar {pub: in};
    var HCO3o: millimolar {pub: in};
    var Nag: millimolar {pub: in};
    var Kg: millimolar {pub: in};
    var Clg: millimolar {pub: in};
    var HCO3g: millimolar {pub: in};
    var time: millisecond {pub: in};
    ode(wg, time) = 10{dimensionless}*Lp*(Nag+Kg+Clg+HCO3g+Xg/wg-(Nao+Ko+Clo+HCO3o));
  enddef;

  def comp wo as
    var wo: micrometre {pub: out};
    var P_wo: micrometre {pub: in};
    var P_wg: micrometre {pub: in};
    var wg: micrometre {pub: in};
    wo = P_wg+P_wo-wg;
  enddef;

  def comp N_Nao as
    var N_Nao: nanomole_per_cm2 {init: 3.65, pub: out};
    var J_NaT: picomole_per_cm2_millisecond {pub: in};
    var J_NaKATPase_n: picomole_per_cm2_millisecond {pub: in};
    var J_NaP: picomole_per_cm2_millisecond {pub: in};
    var J_leakNa: picomole_per_cm2_millisecond {pub: in};
    var dN_Nag_dt: nanomole_per_cm2_millisecond {pub: in};
    var time: millisecond {pub: in};
    ode(N_Nao, time) = 0.01{dimensionless}*(3{dimensionless}*J_NaKATPase_n+J_NaT+J_NaP+J_leakNa-100{dimensionless}*dN_Nag_dt);
  enddef;

  def comp N_Ko as
    var N_Ko: nanomole_per_cm2 {init: 0.075, pub: out};
    var J_NaT: picomole_per_cm2_millisecond {pub: in};
    var J_NaKATPase_n: picomole_per_cm2_millisecond {pub: in};
    var J_NaP: picomole_per_cm2_millisecond {pub: in};
    var J_leakNa: picomole_per_cm2_millisecond {pub: in};
    var dN_Kg_dt: nanomole_per_cm2_millisecond {pub: in};
    // >
    var time: millisecond {pub: in};
    ode(N_Ko, time) = -0.01{dimensionless}*(J_NaT+J_NaP+J_leakNa+3{dimensionless}*J_NaKATPase_n)-dN_Kg_dt;
  enddef;

  def comp N_HCO3o as
    var N_HCO3o: nanomole_per_cm2 {init: 0.375, pub: out};
    var J_NBC: picomole_per_cm2_millisecond {pub: in};
    var time: millisecond {pub: in};
    ode(N_HCO3o, time) = -0.01{dimensionless}*2{dimensionless}*J_NBC;
  enddef;

  def comp electric_potentials as
    var ENa_n: millivolt {pub: out};
    var EK_n: millivolt {pub: out};
    var Ef_n: millivolt {init: -70, pub: out};
    var ENa_g: millivolt {pub: out};
    var EK_g: millivolt {pub: out};
    var ECl_g: millivolt {pub: out};
    var ENBC_g: millivolt {pub: out};
    var Psi: millivolt {pub: in};
    var Nan: millimolar {pub: in};
    var Nag: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Kn: millimolar {pub: in};
    var Kg: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var HCO3g: millimolar {pub: in};
    var HCO3o: millimolar {pub: in};
    var Clg: millimolar {pub: in};
    var Clo: millimolar {pub: in};
    ENa_n = Psi*ln(Nao/Nan);
    EK_n = Psi*ln(Ko/Kn);
    ENa_g = Psi*ln(Nao/Nag);
    EK_g = Psi*ln(Ko/Kg);
    ECl_g = -1{dimensionless}*Psi*ln(Clo/Clg);
    ENBC_g = -Psi*ln(Nao/Nag*sqr(HCO3o/HCO3g));
  enddef;

  def comp ion_concentrations as
    var Clo: millimolar {pub: out};
    var Cln: millimolar {pub: out};
    var Clg: millimolar {pub: out};
    var Nan: millimolar {pub: out};
    var Nao: millimolar {pub: out};
    var Nag: millimolar {pub: out};
    var Kn: millimolar {pub: out};
    var Ko: millimolar {pub: out};
    var Kg: millimolar {pub: out};
    var HCO3g: millimolar {pub: out};
    var HCO3o: millimolar {pub: out};
    var P_Ko: millimolar {init: 3, pub: out};
    var P_Vm_g: millivolt {init: -85};
    var P_Clo: millimolar;
    var P_Cln: millimolar {init: 50};
    var P_Clg: millimolar;
    var P_Nan: millimolar {init: 10};
    var P_Nao: millimolar {init: 146};
    var P_Nag: millimolar {init: 15};
    var P_Kn: millimolar {init: 130};
    var P_Kg: millimolar {init: 100};
    var P_HCO3g: millimolar;
    var P_HCO3o: millimolar {init: 15};
    var P_wn: micrometre {init: 0.05};
    var Psi: millivolt {pub: in};
    var P_wo: micrometre {pub: in};
    var P_wg: micrometre {pub: in};
    var Vm_g: millivolt {pub: in};
    var wo: micrometre {pub: in};
    var wg: micrometre {pub: in};
    var Xg: millimolar_micrometre {pub: in};
    var rho: dimensionless {pub: in};
    var N_Kg: nanomole_per_cm2 {pub: in};
    var N_Ko: nanomole_per_cm2 {pub: in};
    var N_Nag: nanomole_per_cm2 {pub: in};
    var N_Nao: nanomole_per_cm2 {pub: in};
    var N_HCO3o: nanomole_per_cm2 {pub: in};
    P_Clo = P_Nao+P_Ko-P_HCO3o;
    P_HCO3g = P_HCO3o*sqrt(P_Nao/P_Nag*exp(P_Vm_g/Psi));
    P_Clg = P_Clo*exp(P_Vm_g/Psi);
    Kg = N_Kg/wg;
    Ko = N_Ko/wo;
    Kn = (P_wn*P_Kn+P_wg*P_Kg+P_wo*P_Ko-(N_Ko+N_Kg))/P_wn;
    Nag = N_Nag/wg;
    Nao = N_Nao/wo;
    Nan = (P_wn*P_Nan+P_wg*P_Nag+P_wo*P_Nao-(N_Nao+N_Nag))/P_wn;
    Clg = Nag+Kg-(HCO3g+rho*Xg/wg);
    Cln = P_Cln+Nan-P_Nan+Kn-P_Kn;
    Clo = (P_wg*P_Clg+P_wo*P_Clo+P_wn*P_Cln-(wg*Clg+P_wn*Cln))/wo;
    HCO3o = N_HCO3o/wo;
    HCO3g = (P_wg*P_HCO3g+P_wo*P_HCO3o-N_HCO3o)/wg;
  enddef;

  def comp model_parameters as
    var Psi: millivolt {pub: out};
    var F: coulomb_per_mole {init: 9.649e4, pub: out};
    var KmNa: millimolar {init: 10, pub: out};
    var KmK: millimolar {init: 1.5, pub: out};
    var gCl: microS_per_cm2 {init: 50, pub: out};
    var Lp: cm_per_second_millimolar {init: 2e-8, pub: out};
    var Xg: millimolar_micrometre {init: 8.45, pub: out};
    var rho: dimensionless {init: 0.5975, pub: out};
    var P_wo: micrometre {init: 0.025, pub: out};
    var P_wg: micrometre {init: 0.05, pub: out};
    var R: joule_per_mole_kelvin {init: 8.315};
    var T: kelvin {init: 300};
    Psi = 1000{dimensionless}*R*T/F;
  enddef;

  def group as encapsulation for
    comp i_NaT incl
      comp i_NaT_m_gate;
      comp i_NaT_h_gate;
    endcomp;
    comp i_NaP incl
      comp i_NaP_m_gate;
      comp i_NaP_h_gate;
    endcomp;
    comp i_KDR incl
      comp i_KDR_n_gate;
    endcomp;
    comp i_KA incl
      comp i_KA_m_gate;
      comp i_KA_h_gate;
    endcomp;
  enddef;
  def map between Vm_n and environment for
    vars time and time;
  enddef;
  def map between i_NaT and environment for
    vars time and time;
  enddef;
  def map between i_NaP and environment for
    vars time and time;
  enddef;
  def map between i_KDR and environment for
    vars time and time;
  enddef;
  def map between i_KA and environment for
    vars time and time;
  enddef;
  def map between N_Nag and environment for
    vars time and time;
  enddef;
  def map between N_Kg and environment for
    vars time and time;
  enddef;
  def map between wg and environment for
    vars time and time;
  enddef;
  def map between N_Nao and environment for
    vars time and time;
  enddef;
  def map between N_Ko and environment for
    vars time and time;
  enddef;
  def map between N_HCO3o and environment for
    vars time and time;
  enddef;
  def map between i_NaT and Vm_n for
    vars Vm_n and Vm_n;
    vars i_NaT and i_NaT;
  enddef;
  def map between i_NaP and Vm_n for
    vars Vm_n and Vm_n;
    vars i_NaP and i_NaP;
  enddef;
  def map between i_KDR and Vm_n for
    vars Vm_n and Vm_n;
    vars i_KDR and i_KDR;
  enddef;
  def map between i_KA and Vm_n for
    vars Vm_n and Vm_n;
    vars i_KA and i_KA;
  enddef;
  def map between i_leakNa and Vm_n for
    vars Vm_n and Vm_n;
    vars i_leakNa and i_leakNa;
  enddef;
  def map between i_leakK and Vm_n for
    vars Vm_n and Vm_n;
    vars i_leakK and i_leakK;
  enddef;
  def map between i_leakf and Vm_n for
    vars Vm_n and Vm_n;
    vars i_leakf and i_leakf;
  enddef;
  def map between i_NaKATPase_n and Vm_n for
    vars i_NaKATPase_n and i_NaKATPase_n;
  enddef;
  def map between J_Na and Vm_g for
    vars Vm_g and Vm_g;
    vars gNa and gNa;
  enddef;
  def map between J_K and Vm_g for
    vars Vm_g and Vm_g;
    vars gK and gK;
  enddef;
  def map between J_NBC and Vm_g for
    vars Vm_g and Vm_g;
    vars gNBC and gNBC;
  enddef;
  def map between model_parameters and Vm_g for
    vars gCl and gCl;
    vars F and F;
  enddef;
  def map between J_NaKATPase_g and Vm_g for
    vars J_NaKATPase_g and J_NaKATPase_g;
  enddef;
  def map between model_parameters and i_NaT for
    vars F and F;
  enddef;
  def map between model_parameters and i_NaP for
    vars F and F;
  enddef;
  def map between model_parameters and i_KDR for
    vars F and F;
  enddef;
  def map between model_parameters and i_KA for
    vars F and F;
  enddef;
  def map between model_parameters and i_leakK for
    vars F and F;
  enddef;
  def map between model_parameters and i_leakNa for
    vars F and F;
  enddef;
  def map between model_parameters and J_Na for
    vars F and F;
  enddef;
  def map between model_parameters and J_K for
    vars F and F;
  enddef;
  def map between electric_potentials and i_NaT for
    vars ENa_n and ENa_n;
  enddef;
  def map between electric_potentials and i_NaP for
    vars ENa_n and ENa_n;
  enddef;
  def map between electric_potentials and i_KDR for
    vars EK_n and EK_n;
  enddef;
  def map between electric_potentials and i_KA for
    vars EK_n and EK_n;
  enddef;
  def map between electric_potentials and i_leakNa for
    vars ENa_n and ENa_n;
  enddef;
  def map between electric_potentials and i_leakK for
    vars EK_n and EK_n;
  enddef;
  def map between electric_potentials and i_leakf for
    vars Ef_n and Ef_n;
  enddef;
  def map between electric_potentials and Vm_g for
    vars EK_g and EK_g;
    vars ENa_g and ENa_g;
    vars ENBC_g and ENBC_g;
    vars ECl_g and ECl_g;
  enddef;
  def map between ion_concentrations and Vm_g for
    vars Vm_g and Vm_g;
  enddef;
  def map between electric_potentials and J_Na for
    vars ENa_g and ENa_g;
  enddef;
  def map between electric_potentials and J_K for
    vars EK_g and EK_g;
  enddef;
  def map between electric_potentials and J_NBC for
    vars ENBC_g and ENBC_g;
  enddef;
  def map between model_parameters and J_NBC for
    vars F and F;
  enddef;
  def map between model_parameters and i_NaKATPase_n for
    vars KmNa and KmNa;
    vars KmK and KmK;
    vars F and F;
  enddef;
  def map between ion_concentrations and i_NaKATPase_n for
    vars Nan and Nan;
    vars Ko and Ko;
  enddef;
  def map between model_parameters and J_NaKATPase_g for
    vars KmNa and KmNa;
    vars KmK and KmK;
  enddef;
  def map between ion_concentrations and J_NaKATPase_g for
    vars Nag and Nag;
    vars Ko and Ko;
  enddef;
  def map between model_parameters and J_NKCC1 for
    vars F and F;
    vars Psi and Psi;
  enddef;
  def map between ion_concentrations and J_NKCC1 for
    vars Nao and Nao;
    vars Nag and Nag;
    vars Ko and Ko;
    vars Kg and Kg;
    vars Clo and Clo;
    vars Clg and Clg;
    vars P_Ko and P_Ko;
  enddef;
  def map between ion_concentrations and wg for
    vars Nao and Nao;
    vars Nag and Nag;
    vars Ko and Ko;
    vars Kg and Kg;
    vars Clo and Clo;
    vars Clg and Clg;
    vars HCO3o and HCO3o;
    vars HCO3g and HCO3g;
    vars wg and wg;
  enddef;
  def map between model_parameters and wg for
    vars Lp and Lp;
    vars Xg and Xg;
  enddef;
  def map between model_parameters and ion_concentrations for
    vars rho and rho;
    vars Xg and Xg;
    vars P_wg and P_wg;
    vars P_wo and P_wo;
    vars Psi and Psi;
  enddef;
  def map between wo and wg for
    vars wg and wg;
  enddef;
  def map between ion_concentrations and wo for
    vars wo and wo;
  enddef;
  def map between model_parameters and wo for
    vars P_wg and P_wg;
    vars P_wo and P_wo;
  enddef;
  def map between model_parameters and electric_potentials for
    vars Psi and Psi;
  enddef;
  def map between ion_concentrations and electric_potentials for
    vars Nao and Nao;
    vars Nag and Nag;
    vars Nan and Nan;
    vars Ko and Ko;
    vars Kg and Kg;
    vars Kn and Kn;
    vars Clo and Clo;
    vars Clg and Clg;
    vars HCO3o and HCO3o;
    vars HCO3g and HCO3g;
  enddef;
  def map between ion_concentrations and N_Nag for
    vars N_Nag and N_Nag;
  enddef;
  def map between ion_concentrations and N_Nao for
    vars N_Nao and N_Nao;
  enddef;
  def map between ion_concentrations and N_Kg for
    vars N_Kg and N_Kg;
  enddef;
  def map between ion_concentrations and N_Ko for
    vars N_Ko and N_Ko;
  enddef;
  def map between ion_concentrations and N_HCO3o for
    vars N_HCO3o and N_HCO3o;
  enddef;
  def map between J_Na and N_Nag for
    vars J_Na and J_Na;
  enddef;
  def map between J_NaKATPase_g and N_Nag for
    vars J_NaKATPase_g and J_NaKATPase_g;
  enddef;
  def map between J_NKCC1 and N_Nag for
    vars J_NKCC1 and J_NKCC1;
  enddef;
  def map between J_NBC and N_Nag for
    vars J_NBC and J_NBC;
  enddef;
  def map between N_Nao and N_Nag for
    vars dN_Nag_dt and dN_Nag_dt;
  enddef;
  def map between J_K and N_Kg for
    vars J_K and J_K;
  enddef;
  def map between J_NKCC1 and N_Kg for
    vars J_NKCC1 and J_NKCC1;
  enddef;
  def map between J_NaKATPase_g and N_Kg for
    vars J_NaKATPase_g and J_NaKATPase_g;
  enddef;
  def map between N_Ko and N_Kg for
    vars dN_Kg_dt and dN_Kg_dt;
  enddef;
  def map between i_NaT and N_Nao for
    vars J_NaT and J_NaT;
  enddef;
  def map between i_NaKATPase_n and N_Nao for
    vars J_NaKATPase_n and J_NaKATPase_n;
  enddef;
  def map between i_NaP and N_Nao for
    vars J_NaP and J_NaP;
  enddef;
  def map between i_leakNa and N_Nao for
    vars J_leakNa and J_leakNa;
  enddef;
  def map between i_NaT and N_Ko for
    vars J_NaT and J_NaT;
  enddef;
  def map between i_NaKATPase_n and N_Ko for
    vars J_NaKATPase_n and J_NaKATPase_n;
  enddef;
  def map between i_NaP and N_Ko for
    vars J_NaP and J_NaP;
  enddef;
  def map between i_leakNa and N_Ko for
    vars J_leakNa and J_leakNa;
  enddef;
  def map between J_NBC and N_HCO3o for
    vars J_NBC and J_NBC;
  enddef;
  def map between i_NaT and i_NaT_m_gate for
    vars m and m;
    vars time and time;
    vars Vm_n and Vm_n;
  enddef;
  def map between i_NaT and i_NaT_h_gate for
    vars h and h;
    vars time and time;
    vars Vm_n and Vm_n;
  enddef;
  def map between i_NaP and i_NaP_m_gate for
    vars m and m;
    vars time and time;
    vars Vm_n and Vm_n;
  enddef;
  def map between i_NaP and i_NaP_h_gate for
    vars h and h;
    vars time and time;
    vars Vm_n and Vm_n;
  enddef;
  def map between i_KDR and i_KDR_n_gate for
    vars n and n;
    vars time and time;
    vars Vm_n and Vm_n;
  enddef;
  def map between i_KA and i_KA_m_gate for
    vars m and m;
    vars time and time;
    vars Vm_n and Vm_n;
  enddef;
  def map between i_KA and i_KA_h_gate for
    vars h and h;
    vars time and time;
    vars Vm_n and Vm_n;
  enddef;
enddef;
