<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  plant_model_1981.xml

CREATED :  23rd January 2003

LAST MODIFIED : 9th April 2003

AUTHOR :  Catherine Lloyd
          The Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of Plant's 1981 mathematical model of bursting nerve cells. 

CHANGES:  
  09/04/2003 - AAC - Added publication date information.  
 
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="plant_1981" name="plant_1981">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Bifurcation and resonance in a model for bursting nerve cells</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
        To our knowledge this CellML model is an accurate translation of the published model however it does not replicate the published results. The model runs in both OpenCell and COR and the units are consistent. The only information missing from the published paper was the initial values for the gates. These have been set to 0.1 for model completeness but it may be these values which are causing the model to break.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: In this paper we consider a model for the phenomenon of bursting in nerve cells. Experimental evidence indicates that this phenomenon is due to the interaction of multiple conductances with very different kinetics, and the model incorporates this evidence. As a parameter is varied the model undergoes a transition between two oscillatory waveforms; a corresponding transition is observed experimentally. After establishing the periodicity of the subcritical oscillatory solution, the nature of the transition is studied. It is found to be a resonance bifurcation, with the solution branching at the critical point to another periodic solution of the same period. Using this result a comparison is made between the model and experimental observations. The model is found to predict and allow an interpretation of these observations.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Bifurcation and resonance in a model for bursting nerve cells, R.E. Plant, 1981, <emphasis>Journal of Mathematical Biology</emphasis>, 11, 15-32.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=7252375&amp;dopt=Abstract">PubMed ID: 7252375</ulink> 
</para>

<informalfigure float="0" id="fig_cell_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>diagram of the model</title>
    </objectinfo>
    <imagedata fileref="plant_1981.png"/>
  </imageobject>
</mediaobject>
<caption>A schematic representation of the transmebrane ionic currents described by the Plant 1981 model of a bursting neuron.  The model includes a voltage dependent sodium current, I<subscript>I</subscript>; a slowly activating calcium current, I<subscript>Ca</subscript>; a voltage gated potassium current, I<subscript>K</subscript>; a calcium activated potassium current, I<subscript>K,Ca</subscript>; and a leak current, I<subscript>L</subscript>.</caption>
</informalfigure>

</sect1>
</article>
</documentation>
  

  <units name="millivolt">
    <unit units="volt" prefix="milli"/>
  </units>
  
  <units name="per_millivolt">
    <unit units="volt" prefix="milli" exponent="-1"/>
  </units>
  
  <units name="millisecond">
    <unit units="second" prefix="milli"/>
  </units>
  
  <units name="per_millisecond">
    <unit units="millisecond" exponent="-1"/>
  </units>
  
  <units name="per_millivolt_millisecond">
    <unit units="millivolt" exponent="-1"/>
	<unit units="millisecond" exponent="-1"/>
  </units>
  
  <units name="millimolar">
    <unit units="mole" prefix="milli"/>
    <unit units="litre" exponent="-1"/>
  </units>
  
  <units name="millimolar_per_millivolt">
    <unit units="millimolar"/>
	<unit units="millivolt" exponent="-1"/>
  </units>
 
  <units name="milliS_per_microF">
    <unit units="siemens" prefix="milli"/>
    <unit units="farad" prefix="micro" exponent="-1"/>
  </units>
  
  <units name="milliS_per_microF_millivolt">
    <unit units="milliS_per_microF"/>
	<unit units="millivolt" exponent="-1"/>
  </units>
  
  <units name="per_milliS_per_microF">
    <unit units="milliS_per_microF" exponent="-1"/> 
  </units>
  
  <units name="millivolt_per_milliS_per_microF">
    <unit units="millivolt"/>
    <unit units="milliS_per_microF" exponent="-1"/> 
  </units>
  
  <component name="environment">
    <variable units="millisecond" public_interface="out" name="time"/>
  </component>
  
  <component name="membrane">
    <variable units="millivolt" public_interface="out" name="V" initial_value="-54"/>
	<variable units="millivolt" public_interface="out" name="Vs"/>
    
	<variable units="millivolt" name="V_I" initial_value="30.0"/>
	<variable units="millivolt" name="V_K" initial_value="-75.0"/>
	<variable units="millivolt" name="V_L" initial_value="-40.0"/>
	<variable units="millivolt" name="V_H_Na" initial_value="115.0"/>
	<variable units="millivolt" name="V_H_K" initial_value="-12.0"/>
	<variable units="milliS_per_microF" name="g_I"/>
	<variable units="milliS_per_microF" name="g_K" initial_value="0.3"/>
	<variable units="milliS_per_microF" name="g_L" initial_value="0.003"/>
	<variable units="milliS_per_microF" name="g_T"/>
	<variable units="milliS_per_microF" name="g_P" initial_value="0.03"/>
	<variable units="millimolar" name="Kp" initial_value="0.5"/>
	
    <variable units="millisecond" public_interface="in" name="time"/>
    <variable units="millimolar" public_interface="in" name="c"/>
	<variable units="dimensionless" public_interface="in" name="sI"/>
	<variable units="dimensionless" public_interface="in" name="yI"/>
	<variable units="dimensionless" public_interface="in" name="xT"/>
	<variable units="dimensionless" public_interface="in" name="xK"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="membrane_voltage_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> V </ci>
        </apply>
        <apply>
          <plus/>
          <apply>
            <times/>
            <apply>
              <plus/>
              <apply>
                <times/>
				<ci> g_I </ci>
				<apply>
                  <power/>
                  <ci> sI </ci>
                  <cn cellml:units="dimensionless"> 3.0 </cn>
                </apply>
                <ci> yI </ci>
              </apply>
			  <apply>
                <times/>
				<ci> g_T </ci>
				<ci> xT </ci>
              </apply>
			</apply>
			<apply>
              <minus/>
		      <ci> V_I </ci>
			  <ci> V </ci>
            </apply>
		  </apply>
		  <apply>
            <times/>
            <apply>
              <plus/>
              <apply>
                <times/>
				<ci> g_K </ci>
				<apply>
                  <power/>
                  <ci> xK </ci>
                  <cn cellml:units="dimensionless"> 4.0 </cn>
                </apply>
              </apply>
			  <apply>
                <times/>
				<ci> g_P </ci>
				<ci> c </ci>
				<apply>
                  <power/>
				  <apply>
                    <plus/>
					<ci> Kp </ci>
			        <ci> c </ci>
                  </apply>
				  <cn cellml:units="dimensionless"> -1 </cn>
                </apply>
              </apply>
			</apply>
			<apply>
              <minus/>
		      <ci> V_K </ci>
			  <ci> V </ci>
            </apply>
		  </apply>
		  <apply>
            <times/>
			<ci> g_L </ci>
			<apply>
              <minus/>
		      <ci> V_L </ci>
			  <ci> V </ci>
            </apply>
		  </apply>
        </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci> g_I </ci>
        <apply>
          <times/>
          <cn cellml:units="milliS_per_microF"> 1 </cn>
		  <apply>
          <divide/>
          <apply>
            <minus/>
            <ci> V_H_Na </ci>
            <ci> V_H_K </ci>
          </apply>
          <apply>
            <minus/>
            <ci> V_I </ci>
            <ci> V_K </ci>
          </apply>
        </apply>
		</apply>
      </apply>
    </math> 
	
	<math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci> g_T </ci>
        <apply>
          <times/>
          <cn cellml:units="milliS_per_microF_millivolt"> 1 </cn>
		  <apply>
          <divide/>
          <apply>
            <minus/>
            <apply>
              <times/>
			  <ci> V_H_Na </ci>
			  <ci> V_K </ci>
            </apply>
            <apply>
              <times/>
			  <ci> V_I </ci>
			  <ci> V_H_K </ci>
            </apply>
          </apply>
          <apply>
            <minus/>
            <ci> V_I </ci>
            <ci> V_K </ci>
          </apply>
        </apply>
		</apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci> Vs </ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <cn cellml:units="per_milliS_per_microF"> 1 </cn>
			<ci> g_I </ci>
            <ci> V </ci>
          </apply>
          <apply>
            <times/>
			<cn cellml:units="millivolt_per_milliS_per_microF"> 1 </cn>
			<ci> g_T </ci>
		  </apply>
        </apply>
      </apply>
    </math>
  </component>
     
  <component name="sI_gate">
    <variable units="dimensionless" public_interface="out" name="sI"/>
        
    <variable units="per_millisecond" name="alpha_m"/>
    <variable units="per_millisecond" name="beta_m"/>
        
    <variable units="millivolt" public_interface="in" name="Vs"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="alpha_m_calculation">
        <eq/>
        <ci> alpha_m </ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="per_millivolt_millisecond"> 0.1 </cn>
            <apply>
              <minus/>
              <cn cellml:units="millivolt"> 50.0 </cn>
			  <ci> Vs </ci>
            </apply>
          </apply>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <cn cellml:units="millivolt"> 50.0 </cn>
				  <ci> Vs </ci>
                </apply>
                <cn cellml:units="millivolt"> 10.0 </cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="beta_m_calculation">
        <eq/>
        <ci> beta_m </ci>
        <apply>
          <times/>
          <cn cellml:units="per_millisecond"> 4.0 </cn>
          <apply>
            <exp/>
            <apply>
              <divide/>
              <apply>
                <minus/>
                <cn cellml:units="millivolt"> 25.0 </cn>
				<ci> Vs </ci>
              </apply>
              <cn cellml:units="millivolt"> 18.0 </cn>
            </apply>
          </apply>
        </apply>
      </apply>

      <apply id="s_I_calculation">
        <eq/>
        <ci> sI </ci>
        <apply>
          <divide/>
          <ci> alpha_m </ci>
          <apply>
            <plus/>
            <ci> alpha_m </ci>
            <ci> beta_m </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="yI_gate">
    <variable units="dimensionless" public_interface="out" name="yI" initial_value="0.1"/>
    
    <variable units="dimensionless" name="ZI"/>   
    <variable units="per_millisecond" name="alpha_h"/>
    <variable units="per_millisecond" name="beta_h"/>
    <variable units="millisecond" name="tau_yI"/>
    
    <variable units="millivolt" public_interface="in" name="Vs"/>
    <variable units="millisecond" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="alpha_h_calculation">
        <eq/>
        <ci> alpha_h </ci>
        <apply>
          <times/>
          <cn cellml:units="per_millisecond"> 0.07 </cn>
          <apply>
            <exp/>
            <apply>
              <divide/>
              <apply>
                <minus/>
                <cn cellml:units="millivolt"> 25.0 </cn>
				<ci> Vs </ci>
              </apply>
              <cn cellml:units="millivolt"> 20.0 </cn>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="beta_h_calculation">
        <eq/>
        <ci> beta_h </ci>
        <apply>
          <divide/>
          <cn cellml:units="per_millisecond"> 1.0 </cn>
		  <apply>
            <plus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <cn cellml:units="millivolt"> 55.0 </cn>
				  <ci> Vs </ci>
                </apply>
                <cn cellml:units="millivolt"> 10.0 </cn>
              </apply>
            </apply>
			<cn cellml:units="dimensionless"> 1.0 </cn>
          </apply>
        </apply>
      </apply>
      
      <apply id="dyI_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> yI </ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci> ZI </ci>
            <ci> yI </ci>
          </apply>
          <ci> tau_yI </ci>
        </apply>
      </apply>
      
      <apply id="ZI_calculation">
        <eq/>
        <ci> ZI </ci>
        <apply>
          <divide/>
          <ci> alpha_h </ci>
          <apply>
            <plus/>
            <ci> alpha_h </ci>
            <ci> beta_h </ci>
          </apply>
        </apply>
      </apply>
      
      <apply id="tau_yI_calculation">
        <eq/>
        <ci> tau_yI </ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless"> 12.5 </cn>
          <apply>
            <plus/>
            <ci> alpha_h </ci>
            <ci> beta_h </ci>
          </apply>
        </apply>
      </apply>  
    </math>
  </component>
  
  <component name="xT_gate">
    <variable units="dimensionless" public_interface="out" name="xT" initial_value="0.1"/>
    
    <variable units="dimensionless" name="sT"/>   
    <variable units="millisecond" name="tau_xT" initial_value="235.0"/>
    
    <variable units="millivolt" public_interface="in" name="Vs"/>
    <variable units="millisecond" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply id="dxT_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> xT </ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci> sT </ci>
            <ci> xT </ci>
          </apply>
          <ci> tau_xT </ci>
        </apply>
      </apply>
      
      <apply id="sT_calculation">
        <eq/>
        <ci> sT </ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless"> 1.0 </cn>
          <apply>
            <plus/>
            <apply>
              <exp/>
              <apply>
                <times/>
                <cn cellml:units="per_millivolt"> 0.15 </cn>
				<apply>
                  <minus/>
                  <cn cellml:units="millivolt"> -50.0 </cn>
				  <ci> Vs </ci>
                </apply>
              </apply>
            </apply>
			<cn cellml:units="dimensionless"> 1.0 </cn>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="calcium_concentration">
    <variable units="millimolar" public_interface="out" name="c" initial_value="0.1"/>
    
    <variable units="millivolt" name="V_Ca" initial_value="140.0"/>
    <variable units="per_millisecond" name="rho" initial_value="0.0003"/>
    <variable units="millimolar_per_millivolt" name="K_c" initial_value="0.0085"/>
    
    <variable units="millisecond" public_interface="in" name="time"/>
    <variable units="millivolt" public_interface="in" name="V"/>
    <variable units="dimensionless" public_interface="in" name="xT"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="dc_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> c </ci>
        </apply>
        <apply>
          <times/>
          <ci> rho </ci>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci> K_c </ci>
              <ci> xT </ci>
              <apply>
                <minus/>
                <ci> V_Ca </ci>
                <ci> V </ci>
              </apply>
            </apply>
            <ci> c </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="xK_gate">
    <variable units="dimensionless" public_interface="out" name="xK" initial_value="0.1"/>
    
    <variable units="per_millisecond" name="alpha_n"/>
    <variable units="per_millisecond" name="beta_n"/>
    <variable units="millisecond" name="tau_xK"/>
	<variable units="dimensionless" name="sK"/>
    
    <variable units="millivolt" public_interface="in" name="Vs"/>
    <variable units="millisecond" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="alpha_n_calculation">
        <eq/>
        <ci> alpha_n </ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="per_millivolt_millisecond"> 0.01 </cn>
            <apply>
              <minus/>
              <cn cellml:units="millivolt"> 55.0 </cn>
			  <ci> Vs </ci>
            </apply>
          </apply>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <cn cellml:units="millivolt"> 55.0 </cn>
				  <ci> Vs </ci>
                </apply>
                <cn cellml:units="millivolt"> 10.0 </cn>
              </apply>
            </apply>
			<cn cellml:units="dimensionless"> 1.0 </cn>
          </apply>
        </apply>
      </apply>
      
      <apply id="beta_n_calculation">
        <eq/>
        <ci> beta_n </ci>
        <apply>
          <times/>
          <cn cellml:units="per_millisecond"> 0.125 </cn>
          <apply>
            <exp/>
            <apply>
              <divide/>
              <apply>
                <minus/>
                <cn cellml:units="millivolt"> 45.0 </cn>
				<ci> Vs </ci>
              </apply>
              <cn cellml:units="millivolt"> 80.0 </cn>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="dxK_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> xK </ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci> sK </ci>
            <ci> xK </ci>
          </apply>
          <ci> tau_xK </ci>
        </apply>
      </apply>
      
      <apply id="sK_calculation">
        <eq/>
        <ci> sK </ci>
        <apply>
          <divide/>
          <ci> alpha_n </ci>
          <apply>
            <plus/>
            <ci> alpha_n </ci>
            <ci> beta_n </ci>
          </apply>
        </apply>
      </apply>
	  
	  <apply id="tau_xK_calculation">
        <eq/>
        <ci> tau_xK </ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless"> 12.5 </cn>
          <apply>
            <plus/>
            <ci> alpha_n </ci>
            <ci> beta_n </ci>
          </apply>
        </apply>
      </apply>  
    </math>
  </component>
 
  
  <connection>
    <map_components component_2="environment" component_1="membrane"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="yI_gate"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="xT_gate"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="calcium_concentration"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="xK_gate"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="sI_gate" component_1="membrane"/>
    <map_variables variable_2="sI" variable_1="sI"/>
    <map_variables variable_2="Vs" variable_1="Vs"/>
  </connection>
  
  <connection>
    <map_components component_2="yI_gate" component_1="membrane"/>
    <map_variables variable_2="yI" variable_1="yI"/>
    <map_variables variable_2="Vs" variable_1="Vs"/>
  </connection>
  
  <connection>
    <map_components component_2="xT_gate" component_1="membrane"/>
    <map_variables variable_2="xT" variable_1="xT"/>
    <map_variables variable_2="Vs" variable_1="Vs"/>
  </connection>
  
  <connection>
    <map_components component_2="xT_gate" component_1="calcium_concentration"/>
    <map_variables variable_2="xT" variable_1="xT"/>
  </connection>
  
  <connection>
    <map_components component_2="calcium_concentration" component_1="membrane"/>
    <map_variables variable_2="c" variable_1="c"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
  
  <connection>
    <map_components component_2="xK_gate" component_1="membrane"/>
    <map_variables variable_2="xK" variable_1="xK"/>
    <map_variables variable_2="Vs" variable_1="Vs"/>
  </connection>
  
<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#9ac2a308-5989-44a7-af3b-64ce9a902fd9">
    <rdf:li>neuron</rdf:li>
    <rdf:li>bifurcation</rdf:li>
    <rdf:li>calcium dynamics</rdf:li>
    <rdf:li>electrophysiology</rdf:li>
    <rdf:li>neurobiology</rdf:li>
  </rdf:Bag>
  <rdf:Description rdf:about="rdf:#09155c89-f797-4141-81fb-a1de9e85262b">
    <vCard:N rdf:resource="rdf:#2859d7c3-b308-4a89-b523-d01337c265a8"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#55e44aa9-1736-4efa-946f-b28068974d81">
    <dcterms:W3CDTF>2003-04-09</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a6d0ca3a-fb23-4fe5-a274-ba09d110c4d0">
    <dc:subject rdf:resource="rdf:#c4c1528a-31e0-4580-bcd6-7ab8828af612"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#95c5f101-c265-4a85-a692-85301c3fad6b">
    <vCard:Given>R</vCard:Given>
    <vCard:Family>Plant</vCard:Family>
    <vCard:Other>E</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#83361748-1756-4463-8274-ac189c377aff">
    <dc:creator rdf:resource="rdf:#14d6d6e9-0411-4e21-8511-0d36d2d78643"/>
    <rdf:value>
          This is the CellML description of Plant's 1981 mathematical model of 
          bursting nerve cells.
        </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1eb4e357-be88-4699-9b7b-b8d4cd44205d">
    <bqs:Person rdf:resource="rdf:#13e07285-3aef-4270-9276-9311c76944f1"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#14d6d6e9-0411-4e21-8511-0d36d2d78643">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2859d7c3-b308-4a89-b523-d01337c265a8">
    <vCard:Given>Autumn</vCard:Given>
    <vCard:Family>Cuellar</vCard:Family>
    <vCard:Other>A</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8b00a725-39ca-4964-9d32-942b8d230dc4">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#06b07339-1939-4452-a744-fe6c137bb2d8">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#13e07285-3aef-4270-9276-9311c76944f1">
    <vCard:N rdf:resource="rdf:#95c5f101-c265-4a85-a692-85301c3fad6b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ed2bb4fd-9de6-409e-8c88-c3aa03dee589">
    <bqs:Pubmed_id>7252375</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#4f40d2cd-751b-49df-a628-9bec8a7075bd"/>
  </rdf:Description>
  <rdf:Description rdf:about="#plant_1981">
    <dc:title>
        Plant's 1981 mathematical model of bursting nerve cells.
      </dc:title>
    <cmeta:bio_entity>Neuron</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#83361748-1756-4463-8274-ac189c377aff"/>
    <bqs:reference rdf:resource="rdf:#a6d0ca3a-fb23-4fe5-a274-ba09d110c4d0"/>
    <bqs:reference rdf:resource="rdf:#ed2bb4fd-9de6-409e-8c88-c3aa03dee589"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4f40d2cd-751b-49df-a628-9bec8a7075bd">
    <dc:creator rdf:resource="rdf:#1eb4e357-be88-4699-9b7b-b8d4cd44205d"/>
    <dc:title>
            Bifurcation and resonance in a model for bursting nerve cells
          </dc:title>
    <bqs:volume>11</bqs:volume>
    <bqs:first_page>15</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#c38b3aa7-f0c0-4d8e-b9d0-3f16309b7d2d"/>
    <dcterms:issued rdf:resource="rdf:#ee3b1dcf-52dd-4258-82ca-7b54b8508dac"/>
    <bqs:last_page>32</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c4c1528a-31e0-4580-bcd6-7ab8828af612">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#9ac2a308-5989-44a7-af3b-64ce9a902fd9"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#31023f1a-7f9e-4bb2-b98b-7f9368b8755d">
    <vCard:ORG rdf:resource="rdf:#8b00a725-39ca-4964-9d32-942b8d230dc4"/>
    <vCard:EMAIL rdf:resource="rdf:#b90e6ce7-c250-4b5b-84b4-fc35547e56d2"/>
    <vCard:N rdf:resource="rdf:#06b07339-1939-4452-a744-fe6c137bb2d8"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c38b3aa7-f0c0-4d8e-b9d0-3f16309b7d2d">
    <dc:title>Journal of Mathematical Biology</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher>
        The University of Auckland, Auckland Bioengineering Institute
      </dc:publisher>
    <cmeta:modification rdf:resource="rdf:#9c17c301-92c9-40ad-bd30-e798734cd182"/>
    <dcterms:created rdf:resource="rdf:#e86ab73d-5fc3-4d65-9467-d67755a84827"/>
    <dc:creator rdf:resource="rdf:#31023f1a-7f9e-4bb2-b98b-7f9368b8755d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b90e6ce7-c250-4b5b-84b4-fc35547e56d2">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e86ab73d-5fc3-4d65-9467-d67755a84827">
    <dcterms:W3CDTF>2003-01-23</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ee3b1dcf-52dd-4258-82ca-7b54b8508dac">
    <dcterms:W3CDTF>1981-01</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9c17c301-92c9-40ad-bd30-e798734cd182">
    <dcterms:modified rdf:resource="rdf:#55e44aa9-1736-4efa-946f-b28068974d81"/>
    <rdf:value>
          Added publication date information.
        </rdf:value>
    <cmeta:modifier rdf:resource="rdf:#09155c89-f797-4141-81fb-a1de9e85262b"/>
  </rdf:Description>
</rdf:RDF>
</model>
