<?xml version="1.0"?>
<!--
This CellML file was generated on 19/04/2010 at 12:12:23 at p.m. using:

COR (0.9.31.1371)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="tabak_mascagni_bertram_2010" name="tabak_mascagni_bertram_2010">



<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Mechanism for the universal pattern of activity in developing neuronal networks</title>
				<author>
					<firstname>Geoffrey</firstname>
					<surname>Nunns</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
				This CellML model runs in PCEnv, OpenCell and COR, and the units are consistent throughout. This is the mean field model with synaptic depression, and is only one of the five models described in the paper. However, the others describe networks of 100 linked cells, which is a simulation not inside the current scope of CellML. This model also features elements unsuitable to CellML, the variable "noise" is defined as an array of values around zero with a normal distribution, but it is simply set to zero for this simulation. This model comes close to reproducing figures 7A and 7B, although the slight oscillation in these figures arising from the variable "noise" is not present.   
				</para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: Spontaneous episodic activity is a fundamental mode of operation of developing networks. Surprisingly, the duration of an episode of activity correlates with the length of the silent interval that precedes it, but not with the interval that follows. Here we use a modeling approach to explain this characteristic but so far unexplained feature of developing networks. Because the correlation pattern is observed in networks with different structures and components, a satisfactory model needs to generate the right pattern of activity regardless of the details of network architecture or individual cell properties. We thus developed simple models incorporating excitatory coupling between heterogeneous neurons and activity-dependent synaptic depression. These models robustly generated episodic activity with the correct correlation pattern. The correlation pattern resulted from episodes being triggered at random levels of recovery from depression while they terminated around the same level of depression. To explain this fundamental difference between episode onset and termination, we then used a mean field model, where only average activity and average level of recovery from synaptic depression are considered. In this model, episode onset is highly sensitive to inputs. Thus, noise resulting from random coincidences in the spike times of individual neurons led to the high variability at episode onset and to the observed correlation pattern. This work further demonstrates that networks with widely different architectures, different cell types and different functions, all operate according to the same general mechanism early in their development.
</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
Mechanism for the universal pattern of activity in developing neuronal networks, Joel Tabak, Michael Mascagni, Richard Bertram, 2010, <emphasis>Journal of Neurophysiology</emphasis>, volume 103, 2208-2221.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&amp;cmd=Retrieve&amp;dopt=AbstractPlus&amp;list_uids=20164396&amp;query_hl=1&amp;itool=pubmed_docsum">PubMed ID: 20164396</ulink>
				</para>
			</sect1>
		</article>
	</documentation>






   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="second"/>
   </component>
   <component name="a">
      <variable cmeta:id="a_a" initial_value="0.1" name="a" public_interface="out" units="dimensionless"/>
      <variable name="ainf" units="dimensionless"/>
      <variable initial_value="0.8" name="w" units="dimensionless"/>
      <variable initial_value="-0.05" name="ka" units="dimensionless"/>
      <variable initial_value="0.17" name="th0" units="dimensionless"/>
      <variable initial_value="0.01" name="n" units="dimensionless"/>
      <variable initial_value="0" name="wi" units="dimensionless"/>
      <variable name="noise" units="dimensionless"/>
      <variable name="time" public_interface="in" units="second"/>
      <variable name="s" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>noise</ci>
            <apply>
               <times/>
               <ci>n</ci>
               <ci>wi</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>ainf</ci>
            <apply>
               <divide/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <times/>
                              <ci>w</ci>
                              <ci>s</ci>
                              <ci>a</ci>
                           </apply>
                           <ci>th0</ci>
                        </apply>
                        <ci>ka</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>a</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <ci>ainf</ci>
                     <ci>a</ci>
                  </apply>
                  <ci>noise</ci>
               </apply>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="second">1</cn>
            </apply>
         </apply>
      </math>
   </component>
   <component name="s">
      <variable cmeta:id="s_s" initial_value="0.3" name="s" public_interface="out" units="dimensionless"/>
      <variable name="sinf" units="dimensionless"/>
      <variable initial_value="250" name="taus" units="second"/>
      <variable initial_value="0.05" name="ks" units="dimensionless"/>
      <variable initial_value="0.2" name="ths" units="dimensionless"/>
      <variable name="time" public_interface="in" units="second"/>
      <variable name="a" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>sinf</ci>
            <apply>
               <divide/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <ci>a</ci>
                           <ci>ths</ci>
                        </apply>
                        <ci>ks</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>s</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>sinf</ci>
                  <ci>s</ci>
               </apply>
               <ci>taus</ci>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="environment" component_2="a"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="s"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="a" component_2="s"/>
      <map_variables variable_1="a" variable_2="a"/>
      <map_variables variable_1="s" variable_2="s"/>
   </connection>




 






<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
<rdf:Description rdf:nodeID="n1">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2010-02-17</W3CDTF>
</rdf:Description>
<rdf:Description rdf:nodeID="n2">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n3"/>
</N>
<EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n4"/>
</EMAIL>
<ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n5"/>
</ORG>
</rdf:Description>
<rdf:Description rdf:nodeID="n6">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Mascagni</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Michael</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n7">
<rdf:value>
<rdf:Description rdf:nodeID="n8"/>
</rdf:value>
<subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type>
</rdf:Description>
<rdf:Description rdf:nodeID="n9">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n10"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n11">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n6"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n12">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n11"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n13">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n14"/>
</creator>
<volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">103</volume>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Mechanism for the Universal Pattern of Activity in Developing Neuronal Networks</title>
<Journal xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n15"/>
</Journal>
<issued xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:nodeID="n1"/>
</issued>
<first_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">2208</first_page>
<last_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">2221</last_page>
</rdf:Description>
<rdf:Description rdf:nodeID="n16">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n17"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n18">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n9"/>
</Person>
</rdf:Description>
<rdf:Description rdf:about="#tabak_mascagni_bertram_2010">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">The Tabak et al. 2010 mean field model with synaptic depression.</title>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n19"/>
</reference>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n20"/>
</reference>
<cmeta:comment>
<rdf:Description rdf:nodeID="n21"/>
</cmeta:comment>
<simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n22"/>
</simulation>
</rdf:Description>
<rdf:Description rdf:nodeID="n19">
<Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">20164396</Pubmed_id>
<JournalArticle xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n13"/>
</JournalArticle>
</rdf:Description>
<rdf:Description rdf:nodeID="n15">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Journal of Neurophysiology</title>
</rdf:Description>
<rdf:Description rdf:nodeID="n14">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
</rdf:type>
<rdf:_2>
<rdf:Description rdf:nodeID="n12"/>
</rdf:_2>
<rdf:_3>
<rdf:Description rdf:nodeID="n18"/>
</rdf:_3>
<rdf:_1>
<rdf:Description rdf:nodeID="n16"/>
</rdf:_1>
</rdf:Description>
<rdf:Description rdf:nodeID="n17">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n23"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n22">
<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n24"/>
</boundIntervals>
</rdf:Description>
<rdf:Description rdf:nodeID="n4">
<rdf:type>
<rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/>
</rdf:type>
<rdf:value xml:lang="en">gnunns1@jhu.edu</rdf:value>
</rdf:Description>
<rdf:Description rdf:nodeID="n25">
<FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Geoffrey Nunns</FN>
</rdf:Description>
<rdf:Description rdf:nodeID="n3">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Nunns</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Rogan</Other>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Geoffrey</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n26">
<pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">100000</pointDensity>
<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">4000</endingValue>
</rdf:Description>
<rdf:Description rdf:nodeID="n23">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Tabak</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Joel</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n5">
<Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The University of Auckland</Orgname>
<Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Auckland Bioengineering Institute</Orgunit>
</rdf:Description>
<rdf:Description rdf:nodeID="n21">
<rdf:value xml:lang="en">This is the CellML description of the Tabak et al. 2010 mathematical mean field model with synaptic depression.</rdf:value>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n25"/>
</creator>
</rdf:Description>
<rdf:Description rdf:nodeID="n24">
<rdf:first>
<rdf:Description rdf:nodeID="n26"/>
</rdf:first>
<rdf:rest>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
</rdf:rest>
</rdf:Description>
<rdf:Description rdf:nodeID="n10">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Bertram</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Richard</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n8">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/>
</rdf:type>
<rdf:_2 xml:lang="en">signal transduction</rdf:_2>
<rdf:_3 xml:lang="en">neurobiology</rdf:_3>
<rdf:_1 xml:lang="en">electrophysiology</rdf:_1>
</rdf:Description>
<rdf:Description rdf:nodeID="n20">
<subject xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n7"/>
</subject>
</rdf:Description>
<rdf:Description rdf:about="">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n2"/>
</creator>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Mechanism for the Universal Pattern of Activity in Developing Neuronal Networks</title>
<created xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:nodeID="n27"/>
</created>
</rdf:Description>
<rdf:Description rdf:nodeID="n27">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2010-04-19</W3CDTF>
</rdf:Description>
</rdf:RDF>
</model>