// This CellML file was generated on 10/07/2009 at 6:03:32 at p.m. using:
//
// COR (0.9.31.1207)
// Copyright 2002-2009 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// creator: Family Lim; Given Jeelean; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; jlim063@aucklanduni.ac.nz
// created: W3CDTF 2001-09-10
// comment: FN Jeelean Lim; This is the CellML description of Schoeberl et al.'s model of the dynamics of the MAP kinase cascade activated by surface and internalized EGF receptors
// reference: _1 Epidermal Growth Factor; _2 Mitogen-activated protein kinase; _3 signal transduction; subject_type keyword
// reference: Pubmed_id 11923843; Family Schoeberl; Given B; Family Eichler-Jonsson; Given C; Family Gilles; Given E; Other D; Family Muller; Given G; W3CDTF 2002-04; title Nature Biotechnology; volume 20; first_page 370; last_page 375; title Computational Modeling of the Dynamics of the MAP Kinase Cascade Activated by Surface and Internalized EGF Receptors.
// simulation: endingValue 60
// title: The Schoeberl et al.'s Model of the Dynamics of the MAP Kinase Cascade Activated by Surface and Internalized EGF Receptors
def model schoeberl_2002 as
  // Computational Modeling of the Dynamics of the MAP Kinase Cascade Activated by Surface and Internalized EGF Receptors
  //
  // Jeelean Lim
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both OpenCell and COR to produce graphs similar to the figures in the published paper. Units have been checked and are consistent. The same model in the BioModels Database was a very helpful guide during the translation process. In order to produce the graphs in the paper, the following rescalings were used: a) concentrations initially in ng/mL were rescaled to molecules per cell (10E-18 x Na/MW with Na = 6.022E23, MW = 6045 and cell volume of 1E-12L) b) first order rate constants were rescaled from /sec to /minute c) second order rate constants were rescaled to /(minute x molecule)
  //
  // Model Structure
  //
  // ABSTRACT: We present a computational model that offers an integrated quantitative, dynamic, and topological representation of intracellular signal networks, based on known components of epidermal growth factor (EGF) receptor signal pathways. The model provides insight into signal-response relationships between the binding of EGF to its receptor at the cell surface and the activation of downstream proteins in the signaling cascade. It shows that EGF-induced responses are remarkably stable over a 100-fold range of ligand concentration and that the critical parameter in determining signal efficacy is the initial velocity of receptor activation. The predictions of the model agree well with experimental analysis of the effect of EGF on two downstream responses, phosphorylation of ERK-1/2 and expression of the target gene, c-fos.
  //
  // The original paper reference is cited below:
  //
  // Computational modeling of the dynamics of the MAP kinase cascade activated by surface and internalized EGF receptors, Birgit Schoeberl, Claudia Eichler-Jonsson, Ernst Dieter Gilles, Gertraud Muller, 2002, Nature Biotechnology, 20, 370 - 375. PubMed ID: 11923843 (http://www.ncbi.nlm.nih.gov/pubmed/11923843)
  //
  // reaction diagram
  //
  // Scheme of the EGF receptor-induced MAP kinase cascade.
  def unit molecules as base unit;
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit flux as
    unit molecules;
    unit minute {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit molecules {expo: -1};
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  // title: c1
  // alternative: EGF
  // alternative: epidermal growth factor
  def comp c1 as
    var c1: molecules {init: 4962, pub: out};
    var v1: flux {pub: in};
    var time: minute {pub: in};
    ode(c1, time) = 0{flux};
  enddef;

  // title: c2
  // alternative: EGFR
  // alternative: epidermal growth factor receptor
  def comp c2 as
    var c2: molecules {init: 5e4, pub: out};
    var v1: flux {pub: in};
    var v6: flux {pub: in};
    var v13: flux {pub: in};
    var time: minute {pub: in};
    ode(c2, time) = v13-(v1+v6);
  enddef;

  // title: c3
  // alternative: EGF-EGFR
  // alternative: EGF-EGFR complex
  def comp c3 as
    var c3: molecules {init: 0, pub: out};
    var v1: flux {pub: in};
    var v2: flux {pub: in};
    var time: minute {pub: in};
    ode(c3, time) = v1-2{dimensionless}*v2;
  enddef;

  // title: c4
  // alternative: EGF-EGFR complex dimer
  // alternative: (EGF-EGFR)2
  def comp c4 as
    var c4: molecules {init: 0, pub: out};
    var v2: flux {pub: in};
    var v3: flux {pub: in};
    var time: minute {pub: in};
    ode(c4, time) = v2-v3;
  enddef;

  // title: c5
  // alternative: phosphorylated EGF-EGFR complex dimer
  // alternative: (EGF-EGFR*)2
  def comp c5 as
    var c5: molecules {init: 0, pub: out};
    var v3: flux {pub: in};
    var v7: flux {pub: in};
    var v8: flux {pub: in};
    var time: minute {pub: in};
    ode(c5, time) = v3-(v7+v8);
  enddef;

  // title: c6
  // alternative: EGFRi
  def comp c6 as
    var c6: molecules {init: 0, pub: out};
    var v6: flux {pub: in};
    var v10: flux {pub: in};
    var v60: flux {pub: in};
    var time: minute {pub: in};
    ode(c6, time) = v6-(v10+v60);
  enddef;

  // title: c7
  // alternative: (EGF-EGFR*)2-GAP-Grb20-Prot
  def comp c7 as
    var c7: molecules {init: 0, pub: out};
    var v4: flux {pub: in};
    var v5: flux {pub: in};
    var time: minute {pub: in};
    ode(c7, time) = v4-v5;
  enddef;

  // title: c8
  // alternative: (EGF-EGFRi*)2
  def comp c8 as
    var c8: molecules {init: 0, pub: out};
    var v7: flux {pub: in};
    var v12: flux {pub: in};
    var v14: flux {pub: in};
    var v62: flux {pub: in};
    var time: minute {pub: in};
    ode(c8, time) = v7+v12-(v14+v62);
  enddef;

  // title: c9
  // alternative: Proti
  def comp c9 as
    var c9: molecules {init: 0, pub: out};
    var v5: flux {pub: in};
    var v15: flux {pub: in};
    var v107: flux {pub: in};
    var v110: flux {pub: in};
    var v113: flux {pub: in};
    var v116: flux {pub: in};
    var v119: flux {pub: in};
    var v122: flux {pub: in};
    var v125: flux {pub: in};
    var time: minute {pub: in};
    ode(c9, time) = v5+v107+v110+v113+v116+v119+v122+v125-v15;
  enddef;

  // title: c10
  // alternative: EGF-EGFRi
  def comp c10 as
    var c10: molecules {init: 0, pub: out};
    var v10: flux {pub: in};
    var v11: flux {pub: in};
    var time: minute {pub: in};
    ode(c10, time) = v10-2{dimensionless}*v11;
  enddef;

  // title: c11
  // alternative: (EGF-EGFRi)2
  def comp c11 as
    var c11: molecules {init: 0, pub: out};
    var v11: flux {pub: in};
    var v12: flux {pub: in};
    var time: minute {pub: in};
    ode(c11, time) = v11-v12;
  enddef;

  // title: c12
  // alternative: Prot
  def comp c12 as
    var c12: molecules {init: 8.1e4, pub: out};
    var v4: flux {pub: in};
    var v15: flux {pub: in};
    var v106: flux {pub: in};
    var v109: flux {pub: in};
    var v112: flux {pub: in};
    var v115: flux {pub: in};
    var v118: flux {pub: in};
    var v121: flux {pub: in};
    var v124: flux {pub: in};
    var time: minute {pub: in};
    ode(c12, time) = v15-(v4+v106+v109+v112+v115+v118+v121+v124);
  enddef;

  // title: c13
  // alternative: EGFideg
  def comp c13 as
    var c13: molecules {init: 0, pub: out};
    var v61: flux {pub: in};
    var time: minute {pub: in};
    ode(c13, time) = v61;
  enddef;

  // title: c14
  // alternative: GAP
  def comp c14 as
    var c14: molecules {init: 1.2e4, pub: out};
    var v8: flux {pub: in};
    var v14: flux {pub: in};
    var time: minute {pub: in};
    ode(c14, time) = -(v8+v14);
  enddef;

  // title: c15
  // alternative: (EGF-EGFR*)2-GAP
  def comp c15 as
    var c15: molecules {init: 0, pub: out};
    var v8: flux {pub: in};
    var v16: flux {pub: in};
    var v22: flux {pub: in};
    var v32: flux {pub: in};
    var v34: flux {pub: in};
    var v37: flux {pub: in};
    var v39: flux {pub: in};
    var v102: flux {pub: in};
    var time: minute {pub: in};
    ode(c15, time) = v8+v32+v34+v37+v39-(v16+v22+v102);
  enddef;

  // title: c16
  // alternative: EGFi
  def comp c16 as
    var c16: molecules {init: 0, pub: out};
    var v10: flux {pub: in};
    var v61: flux {pub: in};
    var time: minute {pub: in};
    ode(c16, time) = -(v10+v61);
  enddef;

  // title: c17
  // alternative: (EGF-EGFRi*)2-GAP
  def comp c17 as
    var c17: molecules {init: 0, pub: out};
    var v14: flux {pub: in};
    var v63: flux {pub: in};
    var v69: flux {pub: in};
    var v79: flux {pub: in};
    var v80: flux {pub: in};
    var v81: flux {pub: in};
    var v82: flux {pub: in};
    var v102: flux {pub: in};
    var time: minute {pub: in};
    ode(c17, time) = v14+v79+v80+v81+v82+v102-(v63+v69);
  enddef;

  // title: c18
  // alternative: (EGF-EGFRi*)2-GAP-Grb2
  def comp c18 as
    var c18: molecules {init: 0, pub: out};
    var v5: flux {pub: in};
    var v9: flux {pub: in};
    var v63: flux {pub: in};
    var v64: flux {pub: in};
    var time: minute {pub: in};
    ode(c18, time) = v5+v9+v63-v64;
  enddef;

  // title: c19
  // alternative: (EGF-EGFRi*)2-GAP-Grb2-Sos
  def comp c19 as
    var c19: molecules {init: 0, pub: out};
    var v64: flux {pub: in};
    var v65: flux {pub: in};
    var v66: flux {pub: in};
    var v67: flux {pub: in};
    var v68: flux {pub: in};
    var v80: flux {pub: in};
    var v105: flux {pub: in};
    var v107: flux {pub: in};
    var time: minute {pub: in};
    ode(c19, time) = v66+v64+v68+v105+v107-(v65+v67+v80);
  enddef;

  // title: c20
  // alternative: (EGF-EGFRi*)2-GAP-Grb2-Sos-Ras-GDP
  def comp c20 as
    var c20: molecules {init: 0, pub: out};
    var v65: flux {pub: in};
    var v66: flux {pub: in};
    var v108: flux {pub: in};
    var v110: flux {pub: in};
    var time: minute {pub: in};
    ode(c20, time) = v65+v108+v110-v66;
  enddef;

  // title: c21
  // alternative: (EGF-EGFRi*)2-GAP-Grb2-Sos-Ras-GTP
  def comp c21 as
    var c21: molecules {init: 0, pub: out};
    var v67: flux {pub: in};
    var v68: flux {pub: in};
    var v111: flux {pub: in};
    var v113: flux {pub: in};
    var time: minute {pub: in};
    ode(c21, time) = v67+v111+v113-v68;
  enddef;

  // title: c22
  // alternative: Grb2
  def comp c22 as
    var c22: molecules {init: 1.1e4, pub: out};
    var v16: flux {pub: in};
    var v24: flux {pub: in};
    var v35: flux {pub: in};
    var v38: flux {pub: in};
    var v63: flux {pub: in};
    var v71: flux {pub: in};
    var time: minute {pub: in};
    ode(c22, time) = v35-(v16+v24+v38+v63+v71);
  enddef;

  // title: c23
  // alternative: (EGF-EGFR*)2-GAP-Grb2
  def comp c23 as
    var c23: molecules {init: 0, pub: out};
    var v4: flux {pub: in};
    var v9: flux {pub: in};
    var v16: flux {pub: in};
    var v17: flux {pub: in};
    var time: minute {pub: in};
    ode(c23, time) = v16-(v4+v9+v17);
  enddef;

  // title: c24
  // alternative: Sos
  def comp c24 as
    var c24: molecules {init: 2.63e4, pub: out};
    var v64: flux {pub: in};
    var v17: flux {pub: in};
    var v72: flux {pub: in};
    var v25: flux {pub: in};
    var v35: flux {pub: in};
    var v40: flux {pub: in};
    var time: minute {pub: in};
    ode(c24, time) = v35-(v17+v25+v40+v64+v72);
  enddef;

  // title: c25
  // alternative: (EGF-EGFR*)2-GAP-Grb2-Sos
  def comp c25 as
    var c25: molecules {init: 0, pub: out};
    var v17: flux {pub: in};
    var v18: flux {pub: in};
    var v19: flux {pub: in};
    var v20: flux {pub: in};
    var v21: flux {pub: in};
    var v34: flux {pub: in};
    var v105: flux {pub: in};
    var v106: flux {pub: in};
    var time: minute {pub: in};
    ode(c25, time) = v17+v19+v21-(v18+v20+v34+v105+v106);
  enddef;

  // title: c26
  // alternative: Ras-GDP
  def comp c26 as
    var c26: molecules {init: 7.2e4, pub: out};
    var v18: flux {pub: in};
    var v21: flux {pub: in};
    var v26: flux {pub: in};
    var v31: flux {pub: in};
    var v65: flux {pub: in};
    var v78: flux {pub: in};
    var v68: flux {pub: in};
    var v73: flux {pub: in};
    var time: minute {pub: in};
    ode(c26, time) = v21+v31+v68+v78-(v18+v26+v65+v73);
  enddef;

  // title: c27
  // alternative: (EGF-EGFR*)2-GAP-Grb2-Sos-Ras-GDP
  def comp c27 as
    var c27: molecules {init: 0, pub: out};
    var v18: flux {pub: in};
    var v19: flux {pub: in};
    var v108: flux {pub: in};
    var v109: flux {pub: in};
    var time: minute {pub: in};
    ode(c27, time) = v18-(v19+v108+v109);
  enddef;

  // title: c28
  // alternative: Ras-GTP
  def comp c28 as
    var c28: molecules {init: 0, pub: out};
    var v19: flux {pub: in};
    var v27: flux {pub: in};
    var v28: flux {pub: in};
    var time: minute {pub: in};
    ode(c28, time) = v19+v27-v28;
  enddef;

  // title: c29
  // alternative: (EGF-EGFR*)2-GAP-Grb2-Sos-Ras-GTP
  def comp c29 as
    var c29: molecules {init: 0, pub: out};
    var v20: flux {pub: in};
    var v21: flux {pub: in};
    var v111: flux {pub: in};
    var v112: flux {pub: in};
    var time: minute {pub: in};
    ode(c29, time) = v20-(v21+v111+v112);
  enddef;

  // title: c30
  // alternative: Grb2-Sos
  def comp c30 as
    var c30: molecules {init: 4e4, pub: out};
    var v33: flux {pub: in};
    var v34: flux {pub: in};
    var v35: flux {pub: in};
    var v41: flux {pub: in};
    var v80: flux {pub: in};
    var v83: flux {pub: in};
    var time: minute {pub: in};
    ode(c30, time) = v33+v34+v80-(v35+v41+v83);
  enddef;

  // title: c31
  // alternative: Shc
  def comp c31 as
    var c31: molecules {init: 1.01e5, pub: out};
    var v22: flux {pub: in};
    var v36: flux {pub: in};
    var v69: flux {pub: in};
    var time: minute {pub: in};
    ode(c31, time) = v36-(v22+v69);
  enddef;

  // title: c32
  // alternative: (EGF-EGFR*)2-GAP-SHC
  def comp c32 as
    var c32: molecules {init: 0, pub: out};
    var v22: flux {pub: in};
    var v23: flux {pub: in};
    var v103: flux {pub: in};
    var time: minute {pub: in};
    ode(c32, time) = v22-(v23+v103);
  enddef;

  // title: c33
  // alternative: (EGF-EGFR*)2-GAP-SHC*
  def comp c33 as
    var c33: molecules {init: 0, pub: out};
    var v23: flux {pub: in};
    var v24: flux {pub: in};
    var v37: flux {pub: in};
    var v41: flux {pub: in};
    var v104: flux {pub: in};
    var time: minute {pub: in};
    ode(c33, time) = v23-(v24+v37+v41+v104);
  enddef;

  // title: c34
  // alternative: (EGF-EGFR*)2-GAP-SHC*-Grb2
  def comp c34 as
    var c34: molecules {init: 0, pub: out};
    var v24: flux {pub: in};
    var v25: flux {pub: in};
    var v39: flux {pub: in};
    var v114: flux {pub: in};
    var v115: flux {pub: in};
    var time: minute {pub: in};
    ode(c34, time) = v24-(v25+v39+v114+v115);
  enddef;

  // title: c35
  // alternative: (EGF-EGFR*)2-GAP-SHC*-Grb2-Sos
  def comp c35 as
    var c35: molecules {init: 0, pub: out};
    var v25: flux {pub: in};
    var v26: flux {pub: in};
    var v27: flux {pub: in};
    var v30: flux {pub: in};
    var v31: flux {pub: in};
    var v32: flux {pub: in};
    var v41: flux {pub: in};
    var v117: flux {pub: in};
    var v118: flux {pub: in};
    var time: minute {pub: in};
    ode(c35, time) = v25+v27+v31+v41-(v117+v118+v26+v30+v32);
  enddef;

  // title: c36
  // alternative: (EGF-EGFR*)2-GAP-SHC*-Grb2-Sos-Ras-GDP
  def comp c36 as
    var c36: molecules {init: 0, pub: out};
    var v26: flux {pub: in};
    var v27: flux {pub: in};
    var v120: flux {pub: in};
    var v121: flux {pub: in};
    var time: minute {pub: in};
    ode(c36, time) = v26-(v27+v120+v121);
  enddef;

  // title: c37
  // alternative: (EGF-EGFR*)2-GAP-SHC*-Grb2-Sos-Ras-GTP
  def comp c37 as
    var c37: molecules {init: 0, pub: out};
    var v30: flux {pub: in};
    var v31: flux {pub: in};
    var v123: flux {pub: in};
    var v124: flux {pub: in};
    var time: minute {pub: in};
    ode(c37, time) = v30-(v31+v123+v124);
  enddef;

  // title: c38
  // alternative: Shc*-Grb2-Sos
  def comp c38 as
    var c38: molecules {init: 0, pub: out};
    var v32: flux {pub: in};
    var v33: flux {pub: in};
    var v40: flux {pub: in};
    var v79: flux {pub: in};
    var time: minute {pub: in};
    ode(c38, time) = v32+v40+v79-v33;
  enddef;

  // title: c39
  // alternative: Shc*-Grb2
  def comp c39 as
    var c39: molecules {init: 0, pub: out};
    var v38: flux {pub: in};
    var v39: flux {pub: in};
    var v40: flux {pub: in};
    var v82: flux {pub: in};
    var time: minute {pub: in};
    ode(c39, time) = v38+v39+v82-v40;
  enddef;

  // title: c40
  // alternative: Shc*
  def comp c40 as
    var c40: molecules {init: 0, pub: out};
    var v33: flux {pub: in};
    var v36: flux {pub: in};
    var v37: flux {pub: in};
    var v38: flux {pub: in};
    var v81: flux {pub: in};
    var time: minute {pub: in};
    ode(c40, time) = v33+v37+v81-(v36+v38);
  enddef;

  // title: c41
  // alternative: Raf
  def comp c41 as
    var c41: molecules {init: 4e4, pub: out};
    var v28: flux {pub: in};
    var v43: flux {pub: in};
    var v75: flux {pub: in};
    var v85: flux {pub: in};
    var time: minute {pub: in};
    ode(c41, time) = v43+v85-(v28+v75);
  enddef;

  // title: c42
  // alternative: Ras-Raf-GTP
  def comp c42 as
    var c42: molecules {init: 0, pub: out};
    var v28: flux {pub: in};
    var v29: flux {pub: in};
    var time: minute {pub: in};
    ode(c42, time) = v28-v29;
  enddef;

  // title: c43
  // alternative: Ras-GTP*
  def comp c43 as
    var c43: molecules {init: 0, pub: out};
    var v29: flux {pub: in};
    var v20: flux {pub: in};
    var v30: flux {pub: in};
    var time: minute {pub: in};
    ode(c43, time) = v29-(v20+v30);
  enddef;

  // title: c44
  // alternative: Phosphatase1
  def comp c44 as
    var c44: molecules {init: 4e4, pub: out};
    var v42: flux {pub: in};
    var v43: flux {pub: in};
    var v84: flux {pub: in};
    var v85: flux {pub: in};
    var time: minute {pub: in};
    ode(c44, time) = v43+v85-(v42+v84);
  enddef;

  // title: c45
  // alternative: Raf*
  def comp c45 as
    var c45: molecules {init: 0, pub: out};
    var v29: flux {pub: in};
    var v42: flux {pub: in};
    var v44: flux {pub: in};
    var v45: flux {pub: in};
    var v46: flux {pub: in};
    var v47: flux {pub: in};
    var time: minute {pub: in};
    ode(c45, time) = v29+v45+v47-(v42+v44+v46);
  enddef;

  // title: c46
  // alternative: Raf*-phosphatase1
  def comp c46 as
    var c46: molecules {init: 0, pub: out};
    var v42: flux {pub: in};
    var v43: flux {pub: in};
    var time: minute {pub: in};
    ode(c46, time) = v42-v43;
  enddef;

  // title: c47
  // alternative: MEK
  def comp c47 as
    var c47: molecules {init: 2.2e7, pub: out};
    var v44: flux {pub: in};
    var v51: flux {pub: in};
    var v86: flux {pub: in};
    var v93: flux {pub: in};
    var time: minute {pub: in};
    ode(c47, time) = v51+v93-(v44+v86);
  enddef;

  // title: c48
  // alternative: MEK-Raf*
  def comp c48 as
    var c48: molecules {init: 0, pub: out};
    var v44: flux {pub: in};
    var v45: flux {pub: in};
    var time: minute {pub: in};
    ode(c48, time) = v44-v45;
  enddef;

  // title: c49
  // alternative: MEK-P
  def comp c49 as
    var c49: molecules {init: 0, pub: out};
    var v45: flux {pub: in};
    var v46: flux {pub: in};
    var v49: flux {pub: in};
    var v50: flux {pub: in};
    var time: minute {pub: in};
    ode(c49, time) = v45+v49-(v46+v50);
  enddef;

  // title: c50
  // alternative: MEK-P-Raf*
  def comp c50 as
    var c50: molecules {init: 0, pub: out};
    var v46: flux {pub: in};
    var v47: flux {pub: in};
    var time: minute {pub: in};
    ode(c50, time) = v46-v47;
  enddef;

  // title: c51
  // alternative: MEK-PP
  def comp c51 as
    var c51: molecules {init: 0, pub: out};
    var v47: flux {pub: in};
    var v48: flux {pub: in};
    var v52: flux {pub: in};
    var v53: flux {pub: in};
    var v54: flux {pub: in};
    var v55: flux {pub: in};
    var time: minute {pub: in};
    ode(c51, time) = v47+v53+v55-(v48+v52+v54);
  enddef;

  // title: c52
  // alternative: MEK-PP-phosphatase2
  def comp c52 as
    var c52: molecules {init: 0, pub: out};
    var v48: flux {pub: in};
    var v49: flux {pub: in};
    var time: minute {pub: in};
    ode(c52, time) = v48-v49;
  enddef;

  // title: c53
  // alternative: phosphatase2
  def comp c53 as
    var c53: molecules {init: 4e4, pub: out};
    var v48: flux {pub: in};
    var v49: flux {pub: in};
    var v50: flux {pub: in};
    var v51: flux {pub: in};
    var v90: flux {pub: in};
    var v91: flux {pub: in};
    var v92: flux {pub: in};
    var v93: flux {pub: in};
    var time: minute {pub: in};
    ode(c53, time) = v49+v51+v91+v93-(v48+v50+v90+v92);
  enddef;

  // title: c54
  // alternative: MEK-P-phosphatase2
  def comp c54 as
    var c54: molecules {init: 0, pub: out};
    var v50: flux {pub: in};
    var v51: flux {pub: in};
    var time: minute {pub: in};
    ode(c54, time) = v50-v51;
  enddef;

  // title: c55
  // alternative: ERK
  def comp c55 as
    var c55: molecules {init: 2.1e7, pub: out};
    var v52: flux {pub: in};
    var v59: flux {pub: in};
    var v94: flux {pub: in};
    var v101: flux {pub: in};
    var time: minute {pub: in};
    ode(c55, time) = v59+v101-(v52+v94);
  enddef;

  // title: c56
  // alternative: ERK-MEK-PP
  def comp c56 as
    var c56: molecules {init: 0, pub: out};
    var v52: flux {pub: in};
    var v53: flux {pub: in};
    var time: minute {pub: in};
    ode(c56, time) = v52-v53;
  enddef;

  // title: c57
  // alternative: ERK-P
  def comp c57 as
    var c57: molecules {init: 0, pub: out};
    var v53: flux {pub: in};
    var v54: flux {pub: in};
    var v57: flux {pub: in};
    var v58: flux {pub: in};
    var time: minute {pub: in};
    ode(c57, time) = v53+v57-(v54+v58);
  enddef;

  // title: c58
  // alternative: ERK-P-MEK-PP
  def comp c58 as
    var c58: molecules {init: 0, pub: out};
    var v54: flux {pub: in};
    var v55: flux {pub: in};
    var time: minute {pub: in};
    ode(c58, time) = v54-v55;
  enddef;

  // title: c59
  // alternative: ERK-PP
  def comp c59 as
    var c59: molecules {init: 0, pub: out};
    var v55: flux {pub: in};
    var v56: flux {pub: in};
    var time: minute {pub: in};
    ode(c59, time) = v55-v56;
  enddef;

  // title: c60
  // alternative: phosphatase3
  def comp c60 as
    var c60: molecules {init: 1e7, pub: out};
    var v56: flux {pub: in};
    var v57: flux {pub: in};
    var v58: flux {pub: in};
    var v59: flux {pub: in};
    var v98: flux {pub: in};
    var v99: flux {pub: in};
    var v100: flux {pub: in};
    var v101: flux {pub: in};
    var time: minute {pub: in};
    ode(c60, time) = v57+v59+v99+v101-(v56+v58+v98+v100);
  enddef;

  // title: c61
  // alternative: ERK-PP-phosphatase3
  def comp c61 as
    var c61: molecules {init: 0, pub: out};
    var v56: flux {pub: in};
    var v57: flux {pub: in};
    var time: minute {pub: in};
    ode(c61, time) = v56-v57;
  enddef;

  // title: c62
  // alternative: ERK-P-phosphatase3
  def comp c62 as
    var c62: molecules {init: 0, pub: out};
    var v58: flux {pub: in};
    var v59: flux {pub: in};
    var time: minute {pub: in};
    ode(c62, time) = v58-v59;
  enddef;

  // title: c63
  // alternative: (EGF-EGFRi*)2-GAP-SHC
  def comp c63 as
    var c63: molecules {init: 0, pub: out};
    var v69: flux {pub: in};
    var v70: flux {pub: in};
    var v103: flux {pub: in};
    var time: minute {pub: in};
    ode(c63, time) = v69+v103-v70;
  enddef;

  // title: c64
  // alternative: (EGF-EGFRi*)2-GAP-SHC*
  def comp c64 as
    var c64: molecules {init: 0, pub: out};
    var v70: flux {pub: in};
    var v71: flux {pub: in};
    var v81: flux {pub: in};
    var v83: flux {pub: in};
    var v104: flux {pub: in};
    var time: minute {pub: in};
    ode(c64, time) = v70+v104-(v71+v81+v83);
  enddef;

  // title: c65
  // alternative: (EGF-EGFRi*)2-GAP-SHC*-Grb2
  def comp c65 as
    var c65: molecules {init: 0, pub: out};
    var v71: flux {pub: in};
    var v72: flux {pub: in};
    var v82: flux {pub: in};
    var v114: flux {pub: in};
    var v116: flux {pub: in};
    var time: minute {pub: in};
    ode(c65, time) = v71+v114+v116-(v72+v82);
  enddef;

  // title: c66
  // alternative: (EGF-EGFRi*)2-GAP-SHC*-Grb2-Sos
  def comp c66 as
    var c66: molecules {init: 0, pub: out};
    var v72: flux {pub: in};
    var v73: flux {pub: in};
    var v74: flux {pub: in};
    var v77: flux {pub: in};
    var v78: flux {pub: in};
    var v79: flux {pub: in};
    var v83: flux {pub: in};
    var v117: flux {pub: in};
    var v119: flux {pub: in};
    var time: minute {pub: in};
    ode(c66, time) = v72+v74+v78+v83+v117+v119-(v73+v77+v79);
  enddef;

  // title: c67
  // alternative: (EGF-EGFRi*)2-GAP-SHC*-Grb2-Sos-Ras-GDP
  def comp c67 as
    var c67: molecules {init: 0, pub: out};
    var v73: flux {pub: in};
    var v74: flux {pub: in};
    var v120: flux {pub: in};
    var v122: flux {pub: in};
    var time: minute {pub: in};
    ode(c67, time) = v73+v120+v122-v74;
  enddef;

  // title: c68
  // alternative: (EGF-EGFRi*)2-GAP-SHC*-Grb2-Sos-Ras-GTP
  def comp c68 as
    var c68: molecules {init: 0, pub: out};
    var v77: flux {pub: in};
    var v78: flux {pub: in};
    var v123: flux {pub: in};
    var v125: flux {pub: in};
    var time: minute {pub: in};
    ode(c68, time) = v77+v123+v125-v78;
  enddef;

  // title: c69
  // alternative: Ras-GTPi
  def comp c69 as
    var c69: molecules {init: 0, pub: out};
    var v66: flux {pub: in};
    var v74: flux {pub: in};
    var v75: flux {pub: in};
    var time: minute {pub: in};
    ode(c69, time) = v66+v74-v75;
  enddef;

  // title: c70
  // alternative: Raf-Ras-GTPi
  def comp c70 as
    var c70: molecules {init: 0, pub: out};
    var v75: flux {pub: in};
    var v76: flux {pub: in};
    var time: minute {pub: in};
    ode(c70, time) = v75-v76;
  enddef;

  // title: c71
  // alternative: Ras-GTPi*
  def comp c71 as
    var c71: molecules {init: 0, pub: out};
    var v67: flux {pub: in};
    var v76: flux {pub: in};
    var v77: flux {pub: in};
    var time: minute {pub: in};
    ode(c71, time) = v76-(v67+v77);
  enddef;

  // title: c72
  // alternative: Rafi*
  def comp c72 as
    var c72: molecules {init: 0, pub: out};
    var v76: flux {pub: in};
    var v84: flux {pub: in};
    var v86: flux {pub: in};
    var v87: flux {pub: in};
    var v88: flux {pub: in};
    var v89: flux {pub: in};
    var time: minute {pub: in};
    ode(c72, time) = v76+v87+v89-(v84+v86+v88);
  enddef;

  // title: c73
  // alternative: Rafi*-phosphatase1
  def comp c73 as
    var c73: molecules {init: 0, pub: out};
    var v84: flux {pub: in};
    var v85: flux {pub: in};
    var time: minute {pub: in};
    ode(c73, time) = v84-v85;
  enddef;

  // title: c74
  // alternative: MEK-Rafi*
  def comp c74 as
    var c74: molecules {init: 0, pub: out};
    var v86: flux {pub: in};
    var v87: flux {pub: in};
    var time: minute {pub: in};
    ode(c74, time) = v86-v87;
  enddef;

  // title: c75
  // alternative: MEKi-P
  def comp c75 as
    var c75: molecules {init: 0, pub: out};
    var v87: flux {pub: in};
    var v88: flux {pub: in};
    var v91: flux {pub: in};
    var v92: flux {pub: in};
    var time: minute {pub: in};
    ode(c75, time) = v87+v91-(v92+v88);
  enddef;

  // title: c76
  // alternative: MEK-P-Rafi*
  def comp c76 as
    var c76: molecules {init: 0, pub: out};
    var v88: flux {pub: in};
    var v89: flux {pub: in};
    var time: minute {pub: in};
    ode(c76, time) = v88-v89;
  enddef;

  // title: c77
  // alternative: MEKi-PP
  def comp c77 as
    var c77: molecules {init: 0, pub: out};
    var v89: flux {pub: in};
    var v90: flux {pub: in};
    var v94: flux {pub: in};
    var v95: flux {pub: in};
    var v96: flux {pub: in};
    var v97: flux {pub: in};
    var time: minute {pub: in};
    ode(c77, time) = v89+v95+v97-(v90+v94+v96);
  enddef;

  // title: c78
  // alternative: MEKi-PP-phosphatase2
  def comp c78 as
    var c78: molecules {init: 0, pub: out};
    var v90: flux {pub: in};
    var v91: flux {pub: in};
    var time: minute {pub: in};
    ode(c78, time) = v90-v91;
  enddef;

  // title: c79
  // alternative: MEKi-P-phosphatase2
  def comp c79 as
    var c79: molecules {init: 0, pub: out};
    var v92: flux {pub: in};
    var v93: flux {pub: in};
    var time: minute {pub: in};
    ode(c79, time) = v92-v93;
  enddef;

  // title: c80
  // alternative: ERKi-MEKi-PP
  def comp c80 as
    var c80: molecules {init: 0, pub: out};
    var v94: flux {pub: in};
    var v95: flux {pub: in};
    var time: minute {pub: in};
    ode(c80, time) = v94-v95;
  enddef;

  // title: c81
  // alternative: ERKi-P
  def comp c81 as
    var c81: molecules {init: 0, pub: out};
    var v95: flux {pub: in};
    var v96: flux {pub: in};
    var v99: flux {pub: in};
    var v100: flux {pub: in};
    var time: minute {pub: in};
    ode(c81, time) = v95+v99-(v96+v100);
  enddef;

  // title: c82
  // alternative: ERKi-P-MEKi-PP
  def comp c82 as
    var c82: molecules {init: 0, pub: out};
    var v96: flux {pub: in};
    var v97: flux {pub: in};
    var time: minute {pub: in};
    ode(c82, time) = v96-v97;
  enddef;

  // title: c83
  // alternative: ERKi-PP
  def comp c83 as
    var c83: molecules {init: 0, pub: out};
    var v97: flux {pub: in};
    var v98: flux {pub: in};
    var time: minute {pub: in};
    ode(c83, time) = v97-v98;
  enddef;

  // title: c84
  // alternative: ERKi-PP-phosphatase3
  def comp c84 as
    var c84: molecules {init: 0, pub: out};
    var v98: flux {pub: in};
    var v99: flux {pub: in};
    var time: minute {pub: in};
    ode(c84, time) = v98-v99;
  enddef;

  // title: c85
  // alternative: ERKi-P-phosphatase3
  def comp c85 as
    var c85: molecules {init: 0, pub: out};
    var v100: flux {pub: in};
    var v101: flux {pub: in};
    var time: minute {pub: in};
    ode(c85, time) = v100-v101;
  enddef;

  // title: c86
  // alternative: EGFRideg
  def comp c86 as
    var c86: molecules {init: 0, pub: out};
    var v60: flux {pub: in};
    var time: minute {pub: in};
    ode(c86, time) = v60;
  enddef;

  // title: c87
  // alternative: (EGF-EGFRi*)2deg
  def comp c87 as
    var c87: molecules {init: 0, pub: out};
    var v62: flux {pub: in};
    var time: minute {pub: in};
    ode(c87, time) = v62;
  enddef;

  // title: c88
  // alternative: (EGF-EGFR*)2-GAP-Grb2-Sos-Prot
  def comp c88 as
    var c88: molecules {init: 0, pub: out};
    var v106: flux {pub: in};
    var v107: flux {pub: in};
    var time: minute {pub: in};
    ode(c88, time) = v106-v107;
  enddef;

  // title: c89
  // alternative: (EGF-EGFR*)2-GAP-Grb2-Sos-Ras-GDP-Prot
  def comp c89 as
    var c89: molecules {init: 0, pub: out};
    var v109: flux {pub: in};
    var v110: flux {pub: in};
    var time: minute {pub: in};
    ode(c89, time) = v109-v110;
  enddef;

  // title: c90
  // alternative: (EGF-EGFR*)2-GAP-Grb2-Sos-Ras-GTP-Prot
  def comp c90 as
    var c90: molecules {init: 0, pub: out};
    var v112: flux {pub: in};
    var v113: flux {pub: in};
    var time: minute {pub: in};
    ode(c90, time) = v112-v113;
  enddef;

  // title: c91
  // alternative: (EGF-EGFR*)2-GAP-SHC*-Grb2-Prot
  def comp c91 as
    var c91: molecules {init: 0, pub: out};
    var v115: flux {pub: in};
    var v116: flux {pub: in};
    var time: minute {pub: in};
    ode(c91, time) = v115-v116;
  enddef;

  // title: c92
  // alternative: (EGF-EGFR*)2-GAP-SHC*-Grb2-Sos-Prot
  def comp c92 as
    var c92: molecules {init: 0, pub: out};
    var v118: flux {pub: in};
    var v119: flux {pub: in};
    var time: minute {pub: in};
    ode(c92, time) = v118-v119;
  enddef;

  // title: c93
  // alternative: (EGF-EGFR*)2-GAP-SHC*-Grb2-Sos-Ras-GDP-Prot
  def comp c93 as
    var c93: molecules {init: 0, pub: out};
    var v121: flux {pub: in};
    var v122: flux {pub: in};
    var time: minute {pub: in};
    ode(c93, time) = v121-v122;
  enddef;

  // title: c94
  // alternative: (EGF-EGFR*)2-GAP-SHC*-Grb2-Sos-Ras-GTP-Prot
  def comp c94 as
    var c94: molecules {init: 0, pub: out};
    var v124: flux {pub: in};
    var v125: flux {pub: in};
    var time: minute {pub: in};
    ode(c94, time) = v124-v125;
  enddef;

  def comp Raf_activation as
    var Raf_activation: molecules {pub: out};
    var c45: molecules {pub: in};
    var c46: molecules {pub: in};
    var c48: molecules {pub: in};
    var c50: molecules {pub: in};
    var c72: molecules {pub: in};
    var c73: molecules {pub: in};
    var c74: molecules {pub: in};
    var c76: molecules {pub: in};
    Raf_activation = c45+c46+c48+c50+c72+c73+c74+c76;
  enddef;

  def comp MEKPP_total as
    var MEKPP_total: molecules {pub: out};
    var c51: molecules {pub: in};
    var c77: molecules {pub: in};
    MEKPP_total = c51+c77;
  enddef;

  def comp ERKPP_total as
    var ERKPP_total: molecules {pub: out};
    var c59: molecules {pub: in};
    var c83: molecules {pub: in};
    ERKPP_total = c59+c83;
  enddef;

  def comp Ras_GTP_total as
    var Ras_GTP_total: molecules {pub: out};
    var c42: molecules {pub: in};
    var c28: molecules {pub: in};
    var c70: molecules {pub: in};
    var c69: molecules {pub: in};
    Ras_GTP_total = c42+c28+c70+c69;
  enddef;

  def comp ShcP_total as
    var ShcP_total: molecules {pub: out};
    var c33: molecules {pub: in};
    var c34: molecules {pub: in};
    var c35: molecules {pub: in};
    var c36: molecules {pub: in};
    var c37: molecules {pub: in};
    var c38: molecules {pub: in};
    var c39: molecules {pub: in};
    var c40: molecules {pub: in};
    var c64: molecules {pub: in};
    var c65: molecules {pub: in};
    var c66: molecules {pub: in};
    var c67: molecules {pub: in};
    var c68: molecules {pub: in};
    var c91: molecules {pub: in};
    var c92: molecules {pub: in};
    var c93: molecules {pub: in};
    var c94: molecules {pub: in};
    ShcP_total = c33+c34+c35+c36+c37+c38+c39+c40+c64+c65+c66+c67+c68+c91+c92+c93+c94;
  enddef;

  def comp EGF_EGFR_totalx2 as
    var EGF_EGFR_totalx2: molecules {pub: out};
    var c5: molecules {pub: in};
    var c7: molecules {pub: in};
    var c8: molecules {pub: in};
    var c11: molecules {pub: in};
    var c15: molecules {pub: in};
    var c17: molecules {pub: in};
    var c18: molecules {pub: in};
    var c19: molecules {pub: in};
    var c20: molecules {pub: in};
    var c21: molecules {pub: in};
    var c23: molecules {pub: in};
    var c25: molecules {pub: in};
    var c27: molecules {pub: in};
    var c29: molecules {pub: in};
    var c32: molecules {pub: in};
    var c33: molecules {pub: in};
    var c34: molecules {pub: in};
    var c35: molecules {pub: in};
    var c36: molecules {pub: in};
    var c37: molecules {pub: in};
    var c63: molecules {pub: in};
    var c64: molecules {pub: in};
    var c65: molecules {pub: in};
    var c66: molecules {pub: in};
    var c67: molecules {pub: in};
    var c68: molecules {pub: in};
    var c88: molecules {pub: in};
    var c89: molecules {pub: in};
    var c90: molecules {pub: in};
    var c91: molecules {pub: in};
    var c92: molecules {pub: in};
    var c93: molecules {pub: in};
    var c94: molecules {pub: in};
    EGF_EGFR_totalx2 = 2{dimensionless}*(c5+c7+c8+c11+c15+c17+c18+c19+c20+c21+c23+c25+c27+c29+c32+c33+c34+c35+c36+c37+c63+c64+c65+c66+c67+c68+c88+c89+c90+c91+c92+c93+c94);
  enddef;

  def comp v1 as
    var v1: flux {pub: out};
    var c2: molecules {pub: in};
    var c1: molecules {pub: in};
    var c3: molecules {pub: in};
    var k1: second_order_rate_constant {pub: in};
    var kd1: first_order_rate_constant {pub: in};
    v1 = k1*c1*c2-kd1*c3;
  enddef;

  def comp v2 as
    var v2: flux {pub: out};
    var c4: molecules {pub: in};
    var c3: molecules {pub: in};
    var k2: second_order_rate_constant {pub: in};
    var kd2: first_order_rate_constant {pub: in};
    v2 = k2*c3*c3-kd2*c4;
  enddef;

  def comp v3 as
    var v3: flux {pub: out};
    var c4: molecules {pub: in};
    var c5: molecules {pub: in};
    var k3: first_order_rate_constant {pub: in};
    var kd3: first_order_rate_constant {pub: in};
    v3 = k3*c4-kd3*c5;
  enddef;

  def comp v4 as
    var v4: flux {pub: out};
    var c7: molecules {pub: in};
    var c12: molecules {pub: in};
    var c23: molecules {pub: in};
    var k4: second_order_rate_constant {pub: in};
    var kd4: first_order_rate_constant {pub: in};
    v4 = k4*c23*c12-kd4*c7;
  enddef;

  def comp v5 as
    var v5: flux {pub: out};
    var c7: molecules {pub: in};
    var k5: first_order_rate_constant {pub: in};
    v5 = k5*c7;
  enddef;

  def comp v6 as
    var v6: flux {pub: out};
    var c6: molecules {pub: in};
    var c2: molecules {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var kd6: first_order_rate_constant {pub: in};
    v6 = k6*c2-kd6*c6;
  enddef;

  def comp v7 as
    var v7: flux {pub: out};
    var c5: molecules {pub: in};
    var k6: first_order_rate_constant {pub: in};
    v7 = k6*c5;
  enddef;

  def comp v8 as
    var v8: flux {pub: out};
    var c14: molecules {pub: in};
    var c5: molecules {pub: in};
    var c15: molecules {pub: in};
    var k8: second_order_rate_constant {pub: in};
    var kd8: first_order_rate_constant {pub: in};
    v8 = k8*c5*c14-kd8*c15;
  enddef;

  def comp v9 as
    var v9: flux {pub: out};
    var c23: molecules {pub: in};
    var k6: first_order_rate_constant {pub: in};
    v9 = k6*c23;
  enddef;

  def comp v10 as
    var v10: flux {pub: out};
    var c6: molecules {pub: in};
    var c16: molecules {pub: in};
    var c10: molecules {pub: in};
    var k10b: second_order_rate_constant {pub: in};
    var kd10: first_order_rate_constant {pub: in};
    v10 = k10b*c6*c16-kd10*c10;
  enddef;

  def comp v11 as
    var v11: flux {pub: out};
    var c10: molecules {pub: in};
    var c11: molecules {pub: in};
    var k2: second_order_rate_constant {pub: in};
    var kd2: first_order_rate_constant {pub: in};
    v11 = k2*c10*c10-kd2*c11;
  enddef;

  def comp v12 as
    var v12: flux {pub: out};
    var c11: molecules {pub: in};
    var c8: molecules {pub: in};
    var k3: first_order_rate_constant {pub: in};
    var kd3: first_order_rate_constant {pub: in};
    v12 = k3*c11-kd3*c8;
  enddef;

  def comp v13 as
    var v13: flux {pub: out};
    var k13: first_order_rate_constant {pub: in};
    v13 = k13*1{molecules};
  enddef;

  def comp v14 as
    var v14: flux {pub: out};
    var c8: molecules {pub: in};
    var c14: molecules {pub: in};
    var c17: molecules {pub: in};
    var k8: second_order_rate_constant {pub: in};
    var kd8: first_order_rate_constant {pub: in};
    v14 = k8*c8*c14-kd8*c17;
  enddef;

  def comp v15 as
    var v15: flux {pub: out};
    var c9: molecules {pub: in};
    var k15: first_order_rate_constant {pub: in};
    v15 = k15*c9;
  enddef;

  def comp v16 as
    var v16: flux {pub: out};
    var c15: molecules {pub: in};
    var c22: molecules {pub: in};
    var c23: molecules {pub: in};
    var k16: second_order_rate_constant {pub: in};
    var kd16: first_order_rate_constant {pub: in};
    v16 = k16*c22*c15-kd16*c23;
  enddef;

  def comp v17 as
    var v17: flux {pub: out};
    var c23: molecules {pub: in};
    var c24: molecules {pub: in};
    var c25: molecules {pub: in};
    var k17: second_order_rate_constant {pub: in};
    var kd17: first_order_rate_constant {pub: in};
    v17 = k17*c24*c23-kd17*c25;
  enddef;

  def comp v18 as
    var v18: flux {pub: out};
    var c25: molecules {pub: in};
    var c26: molecules {pub: in};
    var c27: molecules {pub: in};
    var k18: second_order_rate_constant {pub: in};
    var kd18: first_order_rate_constant {pub: in};
    v18 = k18*c26*c25-kd18*c27;
  enddef;

  def comp v19 as
    var v19: flux {pub: out};
    var c25: molecules {pub: in};
    var c28: molecules {pub: in};
    var c27: molecules {pub: in};
    var k19: first_order_rate_constant {pub: in};
    var kd19: second_order_rate_constant {pub: in};
    v19 = k19*c27-kd19*c28*c25;
  enddef;

  def comp v20 as
    var v20: flux {pub: out};
    var c25: molecules {pub: in};
    var c43: molecules {pub: in};
    var c29: molecules {pub: in};
    var k20: second_order_rate_constant {pub: in};
    var kd20: first_order_rate_constant {pub: in};
    v20 = k20*c25*c43-kd20*c29;
  enddef;

  def comp v21 as
    var v21: flux {pub: out};
    var c25: molecules {pub: in};
    var c26: molecules {pub: in};
    var c29: molecules {pub: in};
    var k21: first_order_rate_constant {pub: in};
    var kd21: second_order_rate_constant {pub: in};
    v21 = k21*c29-kd21*c25*c26;
  enddef;

  def comp v22 as
    var v22: flux {pub: out};
    var c31: molecules {pub: in};
    var c15: molecules {pub: in};
    var c32: molecules {pub: in};
    var k22: second_order_rate_constant {pub: in};
    var kd22: first_order_rate_constant {pub: in};
    v22 = k22*c31*c15-kd22*c32;
  enddef;

  def comp v23 as
    var v23: flux {pub: out};
    var c32: molecules {pub: in};
    var c33: molecules {pub: in};
    var k23: first_order_rate_constant {pub: in};
    var kd23: first_order_rate_constant {pub: in};
    v23 = k23*c32-kd23*c33;
  enddef;

  def comp v24 as
    var v24: flux {pub: out};
    var c22: molecules {pub: in};
    var c33: molecules {pub: in};
    var c34: molecules {pub: in};
    var k16: second_order_rate_constant {pub: in};
    var kd24: first_order_rate_constant {pub: in};
    v24 = k16*c22*c33-kd24*c34;
  enddef;

  def comp v25 as
    var v25: flux {pub: out};
    var c24: molecules {pub: in};
    var c34: molecules {pub: in};
    var c35: molecules {pub: in};
    var k25: second_order_rate_constant {pub: in};
    var kd25: first_order_rate_constant {pub: in};
    v25 = k25*c24*c34-kd25*c35;
  enddef;

  def comp v26 as
    var v26: flux {pub: out};
    var c26: molecules {pub: in};
    var c35: molecules {pub: in};
    var c36: molecules {pub: in};
    var k18: second_order_rate_constant {pub: in};
    var kd18: first_order_rate_constant {pub: in};
    v26 = k18*c26*c35-kd18*c36;
  enddef;

  def comp v27 as
    var v27: flux {pub: out};
    var c35: molecules {pub: in};
    var c28: molecules {pub: in};
    var c36: molecules {pub: in};
    var k19: first_order_rate_constant {pub: in};
    var kd19: second_order_rate_constant {pub: in};
    v27 = k19*c36-kd19*c35*c28;
  enddef;

  def comp v28 as
    var v28: flux {pub: out};
    var c28: molecules {pub: in};
    var c41: molecules {pub: in};
    var c42: molecules {pub: in};
    var k28: second_order_rate_constant {pub: in};
    var kd28: first_order_rate_constant {pub: in};
    v28 = k28*c28*c41-kd28*c42;
  enddef;

  def comp v29 as
    var v29: flux {pub: out};
    var c43: molecules {pub: in};
    var c45: molecules {pub: in};
    var c42: molecules {pub: in};
    var k29: first_order_rate_constant {pub: in};
    var kd29: second_order_rate_constant {pub: in};
    v29 = k29*c42-kd29*c43*c45;
  enddef;

  def comp v30 as
    var v30: flux {pub: out};
    var c35: molecules {pub: in};
    var c43: molecules {pub: in};
    var c37: molecules {pub: in};
    var k20: second_order_rate_constant {pub: in};
    var kd20: first_order_rate_constant {pub: in};
    v30 = k20*c35*c43-kd20*c37;
  enddef;

  def comp v31 as
    var v31: flux {pub: out};
    var c35: molecules {pub: in};
    var c26: molecules {pub: in};
    var c37: molecules {pub: in};
    var k21: first_order_rate_constant {pub: in};
    var kd21: second_order_rate_constant {pub: in};
    v31 = k21*c37-kd21*c35*c26;
  enddef;

  def comp v32 as
    var v32: flux {pub: out};
    var c38: molecules {pub: in};
    var c15: molecules {pub: in};
    var c35: molecules {pub: in};
    var k32: first_order_rate_constant {pub: in};
    var kd32: second_order_rate_constant {pub: in};
    v32 = k32*c35-kd32*c38*c15;
  enddef;

  def comp v33 as
    var v33: flux {pub: out};
    var c40: molecules {pub: in};
    var c30: molecules {pub: in};
    var c38: molecules {pub: in};
    var k33: first_order_rate_constant {pub: in};
    var kd33: second_order_rate_constant {pub: in};
    v33 = k33*c38-kd33*c40*c30;
  enddef;

  def comp v34 as
    var v34: flux {pub: out};
    var c15: molecules {pub: in};
    var c30: molecules {pub: in};
    var c25: molecules {pub: in};
    var k34: first_order_rate_constant {pub: in};
    var kd34: second_order_rate_constant {pub: in};
    v34 = k34*c25-kd34*c15*c30;
  enddef;

  def comp v35 as
    var v35: flux {pub: out};
    var c24: molecules {pub: in};
    var c22: molecules {pub: in};
    var c30: molecules {pub: in};
    var k35: first_order_rate_constant {pub: in};
    var kd35: second_order_rate_constant {pub: in};
    v35 = k35*c30-kd35*c24*c22;
  enddef;

  def comp v36 as
    var v36: flux {pub: out};
    var c40: molecules {pub: in};
    var Km36: molecules {pub: in};
    var Vm36: flux {pub: in};
    v36 = Vm36*c40/(Km36+c40);
  enddef;

  def comp v37 as
    var v37: flux {pub: out};
    var c15: molecules {pub: in};
    var c40: molecules {pub: in};
    var c33: molecules {pub: in};
    var k37: first_order_rate_constant {pub: in};
    var kd37: second_order_rate_constant {pub: in};
    v37 = k37*c33-kd37*c15*c40;
  enddef;

  def comp v38 as
    var v38: flux {pub: out};
    var c22: molecules {pub: in};
    var c40: molecules {pub: in};
    var c39: molecules {pub: in};
    var k16: second_order_rate_constant {pub: in};
    var kd24: first_order_rate_constant {pub: in};
    v38 = k16*c22*c40-kd24*c39;
  enddef;

  def comp v39 as
    var v39: flux {pub: out};
    var c15: molecules {pub: in};
    var c39: molecules {pub: in};
    var c34: molecules {pub: in};
    var k37: first_order_rate_constant {pub: in};
    var kd37: second_order_rate_constant {pub: in};
    v39 = k37*c34-kd37*c15*c39;
  enddef;

  def comp v40 as
    var v40: flux {pub: out};
    var c24: molecules {pub: in};
    var c39: molecules {pub: in};
    var c38: molecules {pub: in};
    var k40: second_order_rate_constant {pub: in};
    var kd40: first_order_rate_constant {pub: in};
    v40 = k40*c24*c39-kd40*c38;
  enddef;

  def comp v41 as
    var v41: flux {pub: out};
    var c30: molecules {pub: in};
    var c33: molecules {pub: in};
    var c35: molecules {pub: in};
    var k41: second_order_rate_constant {pub: in};
    var kd41: first_order_rate_constant {pub: in};
    v41 = k41*c30*c33-kd41*c35;
  enddef;

  def comp v42 as
    var v42: flux {pub: out};
    var c44: molecules {pub: in};
    var c45: molecules {pub: in};
    var c46: molecules {pub: in};
    var k42: second_order_rate_constant {pub: in};
    var kd42: first_order_rate_constant {pub: in};
    v42 = k42*c44*c45-kd42*c46;
  enddef;

  def comp v43 as
    var v43: flux {pub: out};
    var c46: molecules {pub: in};
    var k43: first_order_rate_constant {pub: in};
    v43 = k43*c46;
  enddef;

  def comp v44 as
    var v44: flux {pub: out};
    var c45: molecules {pub: in};
    var c47: molecules {pub: in};
    var c48: molecules {pub: in};
    var k44: second_order_rate_constant {pub: in};
    var kd44: first_order_rate_constant {pub: in};
    v44 = k44*c47*c45-kd44*c48;
  enddef;

  def comp v45 as
    var v45: flux {pub: out};
    var c48: molecules {pub: in};
    var k45: first_order_rate_constant {pub: in};
    v45 = k45*c48;
  enddef;

  def comp v46 as
    var v46: flux {pub: out};
    var c49: molecules {pub: in};
    var c45: molecules {pub: in};
    var c50: molecules {pub: in};
    var k44: second_order_rate_constant {pub: in};
    var kd44: first_order_rate_constant {pub: in};
    v46 = k44*c49*c45-kd44*c50;
  enddef;

  def comp v47 as
    var v47: flux {pub: out};
    var c50: molecules {pub: in};
    var k47: first_order_rate_constant {pub: in};
    v47 = k47*c50;
  enddef;

  def comp v48 as
    var v48: flux {pub: out};
    var c51: molecules {pub: in};
    var c53: molecules {pub: in};
    var c52: molecules {pub: in};
    var k48: second_order_rate_constant {pub: in};
    var kd48: first_order_rate_constant {pub: in};
    v48 = k48*c51*c53-kd48*c52;
  enddef;

  def comp v49 as
    var v49: flux {pub: out};
    var c52: molecules {pub: in};
    var k49: first_order_rate_constant {pub: in};
    v49 = k49*c52;
  enddef;

  def comp v50 as
    var v50: flux {pub: out};
    var c53: molecules {pub: in};
    var c49: molecules {pub: in};
    var c54: molecules {pub: in};
    var k50: second_order_rate_constant {pub: in};
    var kd50: first_order_rate_constant {pub: in};
    v50 = k50*c53*c49-kd50*c54;
  enddef;

  def comp v51 as
    var v51: flux {pub: out};
    var c54: molecules {pub: in};
    var k49: first_order_rate_constant {pub: in};
    v51 = k49*c54;
  enddef;

  def comp v52 as
    var v52: flux {pub: out};
    var c55: molecules {pub: in};
    var c51: molecules {pub: in};
    var c56: molecules {pub: in};
    var k52: second_order_rate_constant {pub: in};
    var kd52: first_order_rate_constant {pub: in};
    v52 = k52*c55*c51-kd52*c56;
  enddef;

  def comp v53 as
    var v53: flux {pub: out};
    var c56: molecules {pub: in};
    var k53: first_order_rate_constant {pub: in};
    v53 = k53*c56;
  enddef;

  def comp v54 as
    var v54: flux {pub: out};
    var c51: molecules {pub: in};
    var c57: molecules {pub: in};
    var c58: molecules {pub: in};
    var k52: second_order_rate_constant {pub: in};
    var kd52: first_order_rate_constant {pub: in};
    v54 = k52*c51*c57-kd52*c58;
  enddef;

  def comp v55 as
    var v55: flux {pub: out};
    var c58: molecules {pub: in};
    var k55: first_order_rate_constant {pub: in};
    v55 = k55*c58;
  enddef;

  def comp v56 as
    var v56: flux {pub: out};
    var c59: molecules {pub: in};
    var c60: molecules {pub: in};
    var c61: molecules {pub: in};
    var k56: second_order_rate_constant {pub: in};
    var kd56: first_order_rate_constant {pub: in};
    v56 = k56*c59*c60-kd56*c61;
  enddef;

  def comp v57 as
    var v57: flux {pub: out};
    var c61: molecules {pub: in};
    var k57: first_order_rate_constant {pub: in};
    v57 = k57*c61;
  enddef;

  def comp v58 as
    var v58: flux {pub: out};
    var c60: molecules {pub: in};
    var c57: molecules {pub: in};
    var c62: molecules {pub: in};
    var k58: second_order_rate_constant {pub: in};
    var kd58: first_order_rate_constant {pub: in};
    v58 = k58*c60*c57-kd58*c62;
  enddef;

  def comp v59 as
    var v59: flux {pub: out};
    var c62: molecules {pub: in};
    var k59: first_order_rate_constant {pub: in};
    v59 = k59*c62;
  enddef;

  def comp v60 as
    var v60: flux {pub: out};
    var c6: molecules {pub: in};
    var k60: first_order_rate_constant {pub: in};
    v60 = k60*c6;
  enddef;

  def comp v61 as
    var v61: flux {pub: out};
    var c16: molecules {pub: in};
    var k61: first_order_rate_constant {pub: in};
    v61 = k61*c16;
  enddef;

  def comp v62 as
    var v62: flux {pub: out};
    var c8: molecules {pub: in};
    var k60: first_order_rate_constant {pub: in};
    v62 = k60*c8;
  enddef;

  def comp v63 as
    var v63: flux {pub: out};
    var c17: molecules {pub: in};
    var c18: molecules {pub: in};
    var c22: molecules {pub: in};
    var k16: second_order_rate_constant {pub: in};
    var kd16: first_order_rate_constant {pub: in};
    v63 = k16*c17*c22-kd16*c18;
  enddef;

  def comp v64 as
    var v64: flux {pub: out};
    var c24: molecules {pub: in};
    var c18: molecules {pub: in};
    var c19: molecules {pub: in};
    var k17: second_order_rate_constant {pub: in};
    var kd17: first_order_rate_constant {pub: in};
    v64 = k17*c24*c18-kd17*c19;
  enddef;

  def comp v65 as
    var v65: flux {pub: out};
    var c26: molecules {pub: in};
    var c19: molecules {pub: in};
    var c20: molecules {pub: in};
    var k18: second_order_rate_constant {pub: in};
    var kd18: first_order_rate_constant {pub: in};
    v65 = k18*c26*c19-kd18*c20;
  enddef;

  def comp v66 as
    var v66: flux {pub: out};
    var c69: molecules {pub: in};
    var c19: molecules {pub: in};
    var c20: molecules {pub: in};
    var k19: first_order_rate_constant {pub: in};
    var kd19: second_order_rate_constant {pub: in};
    v66 = k19*c20-kd19*c69*c19;
  enddef;

  def comp v67 as
    var v67: flux {pub: out};
    var c71: molecules {pub: in};
    var c19: molecules {pub: in};
    var c21: molecules {pub: in};
    var k20: second_order_rate_constant {pub: in};
    var kd20: first_order_rate_constant {pub: in};
    v67 = k20*c71*c19-kd20*c21;
  enddef;

  def comp v68 as
    var v68: flux {pub: out};
    var c19: molecules {pub: in};
    var c26: molecules {pub: in};
    var c21: molecules {pub: in};
    var k21: first_order_rate_constant {pub: in};
    var kd21: second_order_rate_constant {pub: in};
    v68 = k21*c21-kd21*c19*c26;
  enddef;

  def comp v69 as
    var v69: flux {pub: out};
    var c31: molecules {pub: in};
    var c17: molecules {pub: in};
    var c63: molecules {pub: in};
    var k22: second_order_rate_constant {pub: in};
    var kd22: first_order_rate_constant {pub: in};
    v69 = k22*c31*c17-kd22*c63;
  enddef;

  def comp v70 as
    var v70: flux {pub: out};
    var c63: molecules {pub: in};
    var c64: molecules {pub: in};
    var k23: first_order_rate_constant {pub: in};
    var kd23: first_order_rate_constant {pub: in};
    v70 = k23*c63-kd23*c64;
  enddef;

  def comp v71 as
    var v71: flux {pub: out};
    var c22: molecules {pub: in};
    var c64: molecules {pub: in};
    var c65: molecules {pub: in};
    var k16: second_order_rate_constant {pub: in};
    var kd24: first_order_rate_constant {pub: in};
    v71 = k16*c22*c64-kd24*c65;
  enddef;

  def comp v72 as
    var v72: flux {pub: out};
    var c24: molecules {pub: in};
    var c65: molecules {pub: in};
    var c66: molecules {pub: in};
    var k25: second_order_rate_constant {pub: in};
    var kd25: first_order_rate_constant {pub: in};
    v72 = k25*c24*c65-kd25*c66;
  enddef;

  def comp v73 as
    var v73: flux {pub: out};
    var c26: molecules {pub: in};
    var c66: molecules {pub: in};
    var c67: molecules {pub: in};
    var k18: second_order_rate_constant {pub: in};
    var kd18: first_order_rate_constant {pub: in};
    v73 = k18*c26*c66-kd18*c67;
  enddef;

  def comp v74 as
    var v74: flux {pub: out};
    var c66: molecules {pub: in};
    var c69: molecules {pub: in};
    var c67: molecules {pub: in};
    var k19: first_order_rate_constant {pub: in};
    var kd19: second_order_rate_constant {pub: in};
    v74 = k19*c67-kd19*c66*c69;
  enddef;

  def comp v75 as
    var v75: flux {pub: out};
    var c69: molecules {pub: in};
    var c41: molecules {pub: in};
    var c70: molecules {pub: in};
    var k28: second_order_rate_constant {pub: in};
    var kd28: first_order_rate_constant {pub: in};
    v75 = k28*c69*c41-kd28*c70;
  enddef;

  def comp v76 as
    var v76: flux {pub: out};
    var c71: molecules {pub: in};
    var c72: molecules {pub: in};
    var c70: molecules {pub: in};
    var k29: first_order_rate_constant {pub: in};
    var kd29: second_order_rate_constant {pub: in};
    v76 = k29*c70-kd29*c71*c72;
  enddef;

  def comp v77 as
    var v77: flux {pub: out};
    var c71: molecules {pub: in};
    var c66: molecules {pub: in};
    var c68: molecules {pub: in};
    var k20: second_order_rate_constant {pub: in};
    var kd20: first_order_rate_constant {pub: in};
    v77 = k20*c71*c66-kd20*c68;
  enddef;

  def comp v78 as
    var v78: flux {pub: out};
    var c66: molecules {pub: in};
    var c26: molecules {pub: in};
    var c68: molecules {pub: in};
    var k21: first_order_rate_constant {pub: in};
    var kd21: second_order_rate_constant {pub: in};
    v78 = k21*c68-c26*kd21*c66;
  enddef;

  def comp v79 as
    var v79: flux {pub: out};
    var c17: molecules {pub: in};
    var c38: molecules {pub: in};
    var c66: molecules {pub: in};
    var k32: first_order_rate_constant {pub: in};
    var kd32: second_order_rate_constant {pub: in};
    v79 = k32*c66-kd32*c17*c38;
  enddef;

  def comp v80 as
    var v80: flux {pub: out};
    var c17: molecules {pub: in};
    var c30: molecules {pub: in};
    var c19: molecules {pub: in};
    var k34: first_order_rate_constant {pub: in};
    var kd34: second_order_rate_constant {pub: in};
    v80 = k34*c19-kd34*c17*c30;
  enddef;

  def comp v81 as
    var v81: flux {pub: out};
    var c17: molecules {pub: in};
    var c40: molecules {pub: in};
    var c64: molecules {pub: in};
    var k37: first_order_rate_constant {pub: in};
    var kd37: second_order_rate_constant {pub: in};
    v81 = k37*c64-kd37*c17*c40;
  enddef;

  def comp v82 as
    var v82: flux {pub: out};
    var c17: molecules {pub: in};
    var c39: molecules {pub: in};
    var c65: molecules {pub: in};
    var k37: first_order_rate_constant {pub: in};
    var kd37: second_order_rate_constant {pub: in};
    v82 = k37*c65-kd37*c17*c39;
  enddef;

  def comp v83 as
    var v83: flux {pub: out};
    var c30: molecules {pub: in};
    var c64: molecules {pub: in};
    var c66: molecules {pub: in};
    var k41: second_order_rate_constant {pub: in};
    var kd41: first_order_rate_constant {pub: in};
    v83 = k41*c30*c64-kd41*c66;
  enddef;

  def comp v84 as
    var v84: flux {pub: out};
    var c44: molecules {pub: in};
    var c72: molecules {pub: in};
    var c73: molecules {pub: in};
    var k42: second_order_rate_constant {pub: in};
    var kd42: first_order_rate_constant {pub: in};
    v84 = k42*c44*c72-kd42*c73;
  enddef;

  def comp v85 as
    var v85: flux {pub: out};
    var c73: molecules {pub: in};
    var k43: first_order_rate_constant {pub: in};
    v85 = k43*c73;
  enddef;

  def comp v86 as
    var v86: flux {pub: out};
    var c47: molecules {pub: in};
    var c72: molecules {pub: in};
    var c74: molecules {pub: in};
    var k44: second_order_rate_constant {pub: in};
    var kd44: first_order_rate_constant {pub: in};
    v86 = k44*c47*c72-kd44*c74;
  enddef;

  def comp v87 as
    var v87: flux {pub: out};
    var c74: molecules {pub: in};
    var k45: first_order_rate_constant {pub: in};
    v87 = k45*c74;
  enddef;

  def comp v88 as
    var v88: flux {pub: out};
    var c72: molecules {pub: in};
    var c75: molecules {pub: in};
    var c76: molecules {pub: in};
    var k44: second_order_rate_constant {pub: in};
    var kd44: first_order_rate_constant {pub: in};
    v88 = k44*c72*c75-kd44*c76;
  enddef;

  def comp v89 as
    var v89: flux {pub: out};
    var c76: molecules {pub: in};
    var k47: first_order_rate_constant {pub: in};
    v89 = k47*c76;
  enddef;

  def comp v90 as
    var v90: flux {pub: out};
    var c77: molecules {pub: in};
    var c53: molecules {pub: in};
    var c78: molecules {pub: in};
    var k48: second_order_rate_constant {pub: in};
    var kd48: first_order_rate_constant {pub: in};
    v90 = k48*c77*c53-kd48*c78;
  enddef;

  def comp v91 as
    var v91: flux {pub: out};
    var c78: molecules {pub: in};
    var k49: first_order_rate_constant {pub: in};
    v91 = k49*c78;
  enddef;

  def comp v92 as
    var v92: flux {pub: out};
    var c53: molecules {pub: in};
    var c75: molecules {pub: in};
    var c79: molecules {pub: in};
    var k50: second_order_rate_constant {pub: in};
    var kd50: first_order_rate_constant {pub: in};
    v92 = k50*c53*c75-kd50*c79;
  enddef;

  def comp v93 as
    var v93: flux {pub: out};
    var c79: molecules {pub: in};
    var k49: first_order_rate_constant {pub: in};
    v93 = k49*c79;
  enddef;

  def comp v94 as
    var v94: flux {pub: out};
    var c55: molecules {pub: in};
    var c77: molecules {pub: in};
    var c80: molecules {pub: in};
    var k52: second_order_rate_constant {pub: in};
    var kd52: first_order_rate_constant {pub: in};
    v94 = k52*c55*c77-kd52*c80;
  enddef;

  def comp v95 as
    var v95: flux {pub: out};
    var c80: molecules {pub: in};
    var k53: first_order_rate_constant {pub: in};
    v95 = k53*c80;
  enddef;

  def comp v96 as
    var v96: flux {pub: out};
    var c77: molecules {pub: in};
    var c81: molecules {pub: in};
    var c82: molecules {pub: in};
    var k52: second_order_rate_constant {pub: in};
    var kd52: first_order_rate_constant {pub: in};
    v96 = k52*c77*c81-kd52*c82;
  enddef;

  def comp v97 as
    var v97: flux {pub: out};
    var c82: molecules {pub: in};
    var k55: first_order_rate_constant {pub: in};
    v97 = k55*c82;
  enddef;

  def comp v98 as
    var v98: flux {pub: out};
    var c83: molecules {pub: in};
    var c60: molecules {pub: in};
    var c84: molecules {pub: in};
    var k56: second_order_rate_constant {pub: in};
    var kd56: first_order_rate_constant {pub: in};
    v98 = k56*c83*c60-kd56*c84;
  enddef;

  def comp v99 as
    var v99: flux {pub: out};
    var c84: molecules {pub: in};
    var k57: first_order_rate_constant {pub: in};
    v99 = k57*c84;
  enddef;

  def comp v100 as
    var v100: flux {pub: out};
    var c60: molecules {pub: in};
    var c81: molecules {pub: in};
    var c85: molecules {pub: in};
    var k58: second_order_rate_constant {pub: in};
    var kd58: first_order_rate_constant {pub: in};
    v100 = k58*c60*c81-kd58*c85;
  enddef;

  def comp v101 as
    var v101: flux {pub: out};
    var c85: molecules {pub: in};
    var k59: first_order_rate_constant {pub: in};
    v101 = k59*c85;
  enddef;

  def comp v102 as
    var v102: flux {pub: out};
    var c15: molecules {pub: in};
    var c17: molecules {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var kd6: first_order_rate_constant {pub: in};
    v102 = k6*c15-kd6*c17;
  enddef;

  def comp v103 as
    var v103: flux {pub: out};
    var c32: molecules {pub: in};
    var c63: molecules {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var kd6: first_order_rate_constant {pub: in};
    v103 = k6*c32-kd6*c63;
  enddef;

  def comp v104 as
    var v104: flux {pub: out};
    var c33: molecules {pub: in};
    var c64: molecules {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var kd6: first_order_rate_constant {pub: in};
    v104 = k6*c33-kd6*c64;
  enddef;

  def comp v105 as
    var v105: flux {pub: out};
    var c25: molecules {pub: in};
    var c19: molecules {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var kd6: first_order_rate_constant {pub: in};
    v105 = k6*c25-kd6*c19;
  enddef;

  def comp v106 as
    var v106: flux {pub: out};
    var c25: molecules {pub: in};
    var c12: molecules {pub: in};
    var c88: molecules {pub: in};
    var k4: second_order_rate_constant {pub: in};
    var kd4: first_order_rate_constant {pub: in};
    v106 = k4*c25*c12-kd4*c88;
  enddef;

  def comp v107 as
    var v107: flux {pub: out};
    var c88: molecules {pub: in};
    var k5: first_order_rate_constant {pub: in};
    v107 = k5*c88;
  enddef;

  def comp v108 as
    var v108: flux {pub: out};
    var c27: molecules {pub: in};
    var c20: molecules {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var kd6: first_order_rate_constant {pub: in};
    v108 = k6*c27-kd6*c20;
  enddef;

  def comp v109 as
    var v109: flux {pub: out};
    var c27: molecules {pub: in};
    var c12: molecules {pub: in};
    var c89: molecules {pub: in};
    var k4: second_order_rate_constant {pub: in};
    var kd4: first_order_rate_constant {pub: in};
    v109 = k4*c27*c12-kd4*c89;
  enddef;

  def comp v110 as
    var v110: flux {pub: out};
    var c89: molecules {pub: in};
    var k5: first_order_rate_constant {pub: in};
    v110 = k5*c89;
  enddef;

  def comp v111 as
    var v111: flux {pub: out};
    var c29: molecules {pub: in};
    var c21: molecules {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var kd6: first_order_rate_constant {pub: in};
    v111 = k6*c29-kd6*c21;
  enddef;

  def comp v112 as
    var v112: flux {pub: out};
    var c29: molecules {pub: in};
    var c12: molecules {pub: in};
    var c90: molecules {pub: in};
    var k4: second_order_rate_constant {pub: in};
    var kd4: first_order_rate_constant {pub: in};
    v112 = k4*c29*c12-kd4*c90;
  enddef;

  def comp v113 as
    var v113: flux {pub: out};
    var c90: molecules {pub: in};
    var k5: first_order_rate_constant {pub: in};
    v113 = k5*c90;
  enddef;

  def comp v114 as
    var v114: flux {pub: out};
    var c34: molecules {pub: in};
    var c65: molecules {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var kd6: first_order_rate_constant {pub: in};
    v114 = k6*c34-kd6*c65;
  enddef;

  def comp v115 as
    var v115: flux {pub: out};
    var c34: molecules {pub: in};
    var c12: molecules {pub: in};
    var c91: molecules {pub: in};
    var k4: second_order_rate_constant {pub: in};
    var kd4: first_order_rate_constant {pub: in};
    v115 = k4*c34*c12-kd4*c91;
  enddef;

  def comp v116 as
    var v116: flux {pub: out};
    var c91: molecules {pub: in};
    var k5: first_order_rate_constant {pub: in};
    v116 = k5*c91;
  enddef;

  def comp v117 as
    var v117: flux {pub: out};
    var c35: molecules {pub: in};
    var c66: molecules {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var kd6: first_order_rate_constant {pub: in};
    v117 = k6*c35-kd6*c66;
  enddef;

  def comp v118 as
    var v118: flux {pub: out};
    var c35: molecules {pub: in};
    var c12: molecules {pub: in};
    var c92: molecules {pub: in};
    var k4: second_order_rate_constant {pub: in};
    var kd4: first_order_rate_constant {pub: in};
    v118 = k4*c35*c12-kd4*c92;
  enddef;

  def comp v119 as
    var v119: flux {pub: out};
    var c92: molecules {pub: in};
    var k5: first_order_rate_constant {pub: in};
    v119 = k5*c92;
  enddef;

  def comp v120 as
    var v120: flux {pub: out};
    var c36: molecules {pub: in};
    var c67: molecules {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var kd6: first_order_rate_constant {pub: in};
    v120 = k6*c36-kd6*c67;
  enddef;

  def comp v121 as
    var v121: flux {pub: out};
    var c36: molecules {pub: in};
    var c12: molecules {pub: in};
    var c93: molecules {pub: in};
    var k4: second_order_rate_constant {pub: in};
    var kd4: first_order_rate_constant {pub: in};
    v121 = k4*c36*c12-kd4*c93;
  enddef;

  def comp v122 as
    var v122: flux {pub: out};
    var c93: molecules {pub: in};
    var k5: first_order_rate_constant {pub: in};
    v122 = k5*c93;
  enddef;

  def comp v123 as
    var v123: flux {pub: out};
    var c37: molecules {pub: in};
    var c68: molecules {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var kd6: first_order_rate_constant {pub: in};
    v123 = k6*c37-kd6*c68;
  enddef;

  def comp v124 as
    var v124: flux {pub: out};
    var c37: molecules {pub: in};
    var c12: molecules {pub: in};
    var c94: molecules {pub: in};
    var k4: second_order_rate_constant {pub: in};
    var kd4: first_order_rate_constant {pub: in};
    v124 = k4*c37*c12-kd4*c94;
  enddef;

  def comp v125 as
    var v125: flux {pub: out};
    var c94: molecules {pub: in};
    var k5: first_order_rate_constant {pub: in};
    v125 = k5*c94;
  enddef;

  def comp C as
    var C: flux {pub: out};
    var c1: molecules {pub: in};
    var RT: molecules {init: 50000};
    var k1: second_order_rate_constant {pub: in};
    var kd1: first_order_rate_constant {pub: in};
    C = RT*1{first_order_rate_constant}/(kd1/(k1*c1)+1{dimensionless});
  enddef;

  def comp reaction_rates as
    var k1: second_order_rate_constant {init: 3e-3, pub: out};
    var kd1: first_order_rate_constant {init: 0.228, pub: out};
    var k2: second_order_rate_constant {init: 1e-3, pub: out};
    var kd2: first_order_rate_constant {init: 6, pub: out};
    var k3: first_order_rate_constant {init: 60, pub: out};
    var kd3: first_order_rate_constant {init: 0.6, pub: out};
    var k4: second_order_rate_constant {init: 1.038e-5, pub: out};
    var kd4: first_order_rate_constant {init: 0.0996, pub: out};
    var k5: first_order_rate_constant {pub: out};
    var k6: first_order_rate_constant {init: 3e-3, pub: out};
    var kd6: first_order_rate_constant {init: 0.3, pub: out};
    var k8: second_order_rate_constant {init: 1e-4, pub: out};
    var kd8: first_order_rate_constant {init: 12, pub: out};
    var k10b: second_order_rate_constant {init: 3.25581, pub: out};
    var kd10: first_order_rate_constant {init: 0.66, pub: out};
    var k13: first_order_rate_constant {init: 130.2, pub: out};
    var k15: first_order_rate_constant {init: 600000, pub: out};
    var k16: second_order_rate_constant {init: 0.001, pub: out};
    var kd16: first_order_rate_constant {init: 16.5, pub: out};
    var k17: second_order_rate_constant {init: 0.001, pub: out};
    var kd17: first_order_rate_constant {init: 3.6, pub: out};
    var k18: second_order_rate_constant {init: 0.0015, pub: out};
    var kd18: first_order_rate_constant {init: 78, pub: out};
    var k19: first_order_rate_constant {init: 30, pub: out};
    var kd19: second_order_rate_constant {init: 1e-5, pub: out};
    var k20: second_order_rate_constant {init: 2.1e-4, pub: out};
    var kd20: first_order_rate_constant {init: 24, pub: out};
    var k21: first_order_rate_constant {init: 1.38, pub: out};
    var kd21: second_order_rate_constant {init: 2.2e-5, pub: out};
    var k22: second_order_rate_constant {init: 0.0021, pub: out};
    var kd22: first_order_rate_constant {init: 6, pub: out};
    var k23: first_order_rate_constant {init: 360, pub: out};
    var kd23: first_order_rate_constant {init: 36, pub: out};
    var kd24: first_order_rate_constant {init: 33, pub: out};
    var k25: second_order_rate_constant {init: 0.001, pub: out};
    var kd25: first_order_rate_constant {init: 1.284, pub: out};
    var k28: second_order_rate_constant {init: 1e-4, pub: out};
    var kd28: first_order_rate_constant {init: 0.318, pub: out};
    var k29: first_order_rate_constant {init: 60, pub: out};
    var kd29: second_order_rate_constant {init: 7e-5, pub: out};
    var k32: first_order_rate_constant {init: 6, pub: out};
    var kd32: second_order_rate_constant {init: 2.4e-5, pub: out};
    var k33: first_order_rate_constant {init: 12, pub: out};
    var kd33: second_order_rate_constant {init: 0.0021, pub: out};
    var k34: first_order_rate_constant {init: 1.8, pub: out};
    var kd34: second_order_rate_constant {init: 4.5e-4, pub: out};
    var k35: first_order_rate_constant {init: 0.09, pub: out};
    var kd35: second_order_rate_constant {init: 4.5e-4, pub: out};
    var Km36: molecules {init: 2e14, pub: out};
    var Vm36: flux {init: 61200, pub: out};
    var k37: first_order_rate_constant {init: 18, pub: out};
    var kd37: second_order_rate_constant {init: 9e-5, pub: out};
    var k40: second_order_rate_constant {init: 0.003, pub: out};
    var kd40: first_order_rate_constant {init: 3.84, pub: out};
    var k41: second_order_rate_constant {init: 0.003, pub: out};
    var kd41: first_order_rate_constant {init: 2.574, pub: out};
    var k42: second_order_rate_constant {init: 0.007, pub: out};
    var kd42: first_order_rate_constant {init: 12, pub: out};
    var k43: first_order_rate_constant {init: 60, pub: out};
    var k44: second_order_rate_constant {init: 0.00111, pub: out};
    var kd44: first_order_rate_constant {init: 1.0998, pub: out};
    var k45: first_order_rate_constant {init: 210, pub: out};
    var k47: first_order_rate_constant {init: 174, pub: out};
    var k48: second_order_rate_constant {init: 0.00143, pub: out};
    var kd48: first_order_rate_constant {init: 48, pub: out};
    var k49: first_order_rate_constant {init: 3.48, pub: out};
    var k50: second_order_rate_constant {init: 2.5e-5, pub: out};
    var kd50: first_order_rate_constant {init: 30, pub: out};
    var k52: second_order_rate_constant {init: 0.00534, pub: out};
    var kd52: first_order_rate_constant {init: 1.98, pub: out};
    var k53: first_order_rate_constant {init: 960, pub: out};
    var k55: first_order_rate_constant {init: 342, pub: out};
    var k56: second_order_rate_constant {init: 0.00145, pub: out};
    var kd56: first_order_rate_constant {init: 36, pub: out};
    var k57: first_order_rate_constant {init: 16.2, pub: out};
    var k58: second_order_rate_constant {init: 5e-4, pub: out};
    var kd58: first_order_rate_constant {init: 30, pub: out};
    var k59: first_order_rate_constant {init: 18, pub: out};
    var k60: first_order_rate_constant {init: 0.04002, pub: out};
    var k61: first_order_rate_constant {init: 0.01002, pub: out};
    var C: flux {pub: in};
    k5 = sel
      case C < 3100{flux}:
        1.55{first_order_rate_constant};
      case C > 100000{flux}:
        0.2{first_order_rate_constant};
      otherwise:
        (C*(-0.0000135{dimensionless})+1.55{flux})/1{molecules};
    endsel;
  enddef;
  def map between c1 and v1 for
    vars c1 and c1;
    vars v1 and v1;
  enddef;
  def map between c2 and v1 for
    vars c2 and c2;
    vars v1 and v1;
  enddef;
  def map between c2 and v6 for
    vars c2 and c2;
    vars v6 and v6;
  enddef;
  def map between c2 and v13 for
    vars v13 and v13;
  enddef;
  def map between c3 and v1 for
    vars c3 and c3;
    vars v1 and v1;
  enddef;
  def map between c3 and v2 for
    vars c3 and c3;
    vars v2 and v2;
  enddef;
  def map between c4 and v2 for
    vars c4 and c4;
    vars v2 and v2;
  enddef;
  def map between c4 and v3 for
    vars c4 and c4;
    vars v3 and v3;
  enddef;
  def map between c5 and v3 for
    vars c5 and c5;
    vars v3 and v3;
  enddef;
  def map between c5 and v7 for
    vars c5 and c5;
    vars v7 and v7;
  enddef;
  def map between c5 and v8 for
    vars c5 and c5;
    vars v8 and v8;
  enddef;
  def map between c6 and v6 for
    vars c6 and c6;
    vars v6 and v6;
  enddef;
  def map between c6 and v10 for
    vars c6 and c6;
    vars v10 and v10;
  enddef;
  def map between c6 and v60 for
    vars c6 and c6;
    vars v60 and v60;
  enddef;
  def map between c7 and v4 for
    vars c7 and c7;
    vars v4 and v4;
  enddef;
  def map between c7 and v5 for
    vars c7 and c7;
    vars v5 and v5;
  enddef;
  def map between c8 and v7 for
    vars v7 and v7;
  enddef;
  def map between c8 and v12 for
    vars c8 and c8;
    vars v12 and v12;
  enddef;
  def map between c8 and v14 for
    vars c8 and c8;
    vars v14 and v14;
  enddef;
  def map between c8 and v62 for
    vars c8 and c8;
    vars v62 and v62;
  enddef;
  def map between c9 and v5 for
    vars v5 and v5;
  enddef;
  def map between c9 and v15 for
    vars c9 and c9;
    vars v15 and v15;
  enddef;
  def map between c9 and v107 for
    vars v107 and v107;
  enddef;
  def map between c9 and v110 for
    vars v110 and v110;
  enddef;
  def map between c9 and v113 for
    vars v113 and v113;
  enddef;
  def map between c9 and v116 for
    vars v116 and v116;
  enddef;
  def map between c9 and v119 for
    vars v119 and v119;
  enddef;
  def map between c9 and v122 for
    vars v122 and v122;
  enddef;
  def map between c9 and v125 for
    vars v125 and v125;
  enddef;
  def map between c10 and v10 for
    vars c10 and c10;
    vars v10 and v10;
  enddef;
  def map between c10 and v11 for
    vars c10 and c10;
    vars v11 and v11;
  enddef;
  def map between c11 and v11 for
    vars c11 and c11;
    vars v11 and v11;
  enddef;
  def map between c11 and v12 for
    vars c11 and c11;
    vars v12 and v12;
  enddef;
  def map between c12 and v4 for
    vars c12 and c12;
    vars v4 and v4;
  enddef;
  def map between c12 and v15 for
    vars v15 and v15;
  enddef;
  def map between c12 and v106 for
    vars c12 and c12;
    vars v106 and v106;
  enddef;
  def map between c12 and v109 for
    vars c12 and c12;
    vars v109 and v109;
  enddef;
  def map between c12 and v112 for
    vars c12 and c12;
    vars v112 and v112;
  enddef;
  def map between c12 and v115 for
    vars c12 and c12;
    vars v115 and v115;
  enddef;
  def map between c12 and v118 for
    vars c12 and c12;
    vars v118 and v118;
  enddef;
  def map between c12 and v121 for
    vars c12 and c12;
    vars v121 and v121;
  enddef;
  def map between c12 and v124 for
    vars c12 and c12;
    vars v124 and v124;
  enddef;
  def map between c13 and v61 for
    vars v61 and v61;
  enddef;
  def map between c14 and v8 for
    vars c14 and c14;
    vars v8 and v8;
  enddef;
  def map between c14 and v14 for
    vars c14 and c14;
    vars v14 and v14;
  enddef;
  def map between c15 and v8 for
    vars c15 and c15;
    vars v8 and v8;
  enddef;
  def map between c15 and v16 for
    vars c15 and c15;
    vars v16 and v16;
  enddef;
  def map between c15 and v22 for
    vars c15 and c15;
    vars v22 and v22;
  enddef;
  def map between c15 and v32 for
    vars c15 and c15;
    vars v32 and v32;
  enddef;
  def map between c15 and v34 for
    vars c15 and c15;
    vars v34 and v34;
  enddef;
  def map between c15 and v37 for
    vars c15 and c15;
    vars v37 and v37;
  enddef;
  def map between c15 and v39 for
    vars c15 and c15;
    vars v39 and v39;
  enddef;
  def map between c15 and v102 for
    vars c15 and c15;
    vars v102 and v102;
  enddef;
  def map between c16 and v10 for
    vars c16 and c16;
    vars v10 and v10;
  enddef;
  def map between c16 and v61 for
    vars c16 and c16;
    vars v61 and v61;
  enddef;
  def map between c17 and v14 for
    vars c17 and c17;
    vars v14 and v14;
  enddef;
  def map between c17 and v63 for
    vars c17 and c17;
    vars v63 and v63;
  enddef;
  def map between c17 and v69 for
    vars c17 and c17;
    vars v69 and v69;
  enddef;
  def map between c17 and v79 for
    vars c17 and c17;
    vars v79 and v79;
  enddef;
  def map between c17 and v80 for
    vars c17 and c17;
    vars v80 and v80;
  enddef;
  def map between c17 and v81 for
    vars c17 and c17;
    vars v81 and v81;
  enddef;
  def map between c17 and v82 for
    vars c17 and c17;
    vars v82 and v82;
  enddef;
  def map between c17 and v102 for
    vars c17 and c17;
    vars v102 and v102;
  enddef;
  def map between c18 and v5 for
    vars v5 and v5;
  enddef;
  def map between c18 and v9 for
    vars v9 and v9;
  enddef;
  def map between c18 and v63 for
    vars c18 and c18;
    vars v63 and v63;
  enddef;
  def map between c18 and v64 for
    vars c18 and c18;
    vars v64 and v64;
  enddef;
  def map between c19 and v64 for
    vars c19 and c19;
    vars v64 and v64;
  enddef;
  def map between c19 and v65 for
    vars c19 and c19;
    vars v65 and v65;
  enddef;
  def map between c19 and v66 for
    vars c19 and c19;
    vars v66 and v66;
  enddef;
  def map between c19 and v67 for
    vars c19 and c19;
    vars v67 and v67;
  enddef;
  def map between c19 and v68 for
    vars c19 and c19;
    vars v68 and v68;
  enddef;
  def map between c19 and v80 for
    vars c19 and c19;
    vars v80 and v80;
  enddef;
  def map between c19 and v105 for
    vars c19 and c19;
    vars v105 and v105;
  enddef;
  def map between c19 and v107 for
    vars v107 and v107;
  enddef;
  def map between c20 and v65 for
    vars c20 and c20;
    vars v65 and v65;
  enddef;
  def map between c20 and v66 for
    vars c20 and c20;
    vars v66 and v66;
  enddef;
  def map between c20 and v108 for
    vars c20 and c20;
    vars v108 and v108;
  enddef;
  def map between c20 and v110 for
    vars v110 and v110;
  enddef;
  def map between c21 and v67 for
    vars c21 and c21;
    vars v67 and v67;
  enddef;
  def map between c21 and v68 for
    vars c21 and c21;
    vars v68 and v68;
  enddef;
  def map between c21 and v111 for
    vars c21 and c21;
    vars v111 and v111;
  enddef;
  def map between c21 and v113 for
    vars v113 and v113;
  enddef;
  def map between c22 and v16 for
    vars c22 and c22;
    vars v16 and v16;
  enddef;
  def map between c22 and v24 for
    vars c22 and c22;
    vars v24 and v24;
  enddef;
  def map between c22 and v35 for
    vars c22 and c22;
    vars v35 and v35;
  enddef;
  def map between c22 and v38 for
    vars c22 and c22;
    vars v38 and v38;
  enddef;
  def map between c22 and v63 for
    vars c22 and c22;
    vars v63 and v63;
  enddef;
  def map between c22 and v71 for
    vars c22 and c22;
    vars v71 and v71;
  enddef;
  def map between c23 and v4 for
    vars c23 and c23;
    vars v4 and v4;
  enddef;
  def map between c23 and v9 for
    vars c23 and c23;
    vars v9 and v9;
  enddef;
  def map between c23 and v16 for
    vars c23 and c23;
    vars v16 and v16;
  enddef;
  def map between c23 and v17 for
    vars c23 and c23;
    vars v17 and v17;
  enddef;
  def map between c24 and v17 for
    vars c24 and c24;
    vars v17 and v17;
  enddef;
  def map between c24 and v25 for
    vars c24 and c24;
    vars v25 and v25;
  enddef;
  def map between c24 and v35 for
    vars c24 and c24;
    vars v35 and v35;
  enddef;
  def map between c24 and v40 for
    vars c24 and c24;
    vars v40 and v40;
  enddef;
  def map between c24 and v64 for
    vars c24 and c24;
    vars v64 and v64;
  enddef;
  def map between c24 and v72 for
    vars c24 and c24;
    vars v72 and v72;
  enddef;
  def map between c25 and v17 for
    vars c25 and c25;
    vars v17 and v17;
  enddef;
  def map between c25 and v18 for
    vars c25 and c25;
    vars v18 and v18;
  enddef;
  def map between c25 and v19 for
    vars c25 and c25;
    vars v19 and v19;
  enddef;
  def map between c25 and v20 for
    vars c25 and c25;
    vars v20 and v20;
  enddef;
  def map between c25 and v21 for
    vars c25 and c25;
    vars v21 and v21;
  enddef;
  def map between c25 and v34 for
    vars c25 and c25;
    vars v34 and v34;
  enddef;
  def map between c25 and v105 for
    vars c25 and c25;
    vars v105 and v105;
  enddef;
  def map between c25 and v106 for
    vars c25 and c25;
    vars v106 and v106;
  enddef;
  def map between c26 and v18 for
    vars c26 and c26;
    vars v18 and v18;
  enddef;
  def map between c26 and v21 for
    vars c26 and c26;
    vars v21 and v21;
  enddef;
  def map between c26 and v26 for
    vars c26 and c26;
    vars v26 and v26;
  enddef;
  def map between c26 and v31 for
    vars c26 and c26;
    vars v31 and v31;
  enddef;
  def map between c26 and v65 for
    vars c26 and c26;
    vars v65 and v65;
  enddef;
  def map between c26 and v68 for
    vars c26 and c26;
    vars v68 and v68;
  enddef;
  def map between c26 and v73 for
    vars c26 and c26;
    vars v73 and v73;
  enddef;
  def map between c26 and v78 for
    vars c26 and c26;
    vars v78 and v78;
  enddef;
  def map between c27 and v18 for
    vars c27 and c27;
    vars v18 and v18;
  enddef;
  def map between c27 and v19 for
    vars c27 and c27;
    vars v19 and v19;
  enddef;
  def map between c27 and v108 for
    vars c27 and c27;
    vars v108 and v108;
  enddef;
  def map between c27 and v109 for
    vars c27 and c27;
    vars v109 and v109;
  enddef;
  def map between c28 and v19 for
    vars c28 and c28;
    vars v19 and v19;
  enddef;
  def map between c28 and v27 for
    vars c28 and c28;
    vars v27 and v27;
  enddef;
  def map between c28 and v28 for
    vars c28 and c28;
    vars v28 and v28;
  enddef;
  def map between c29 and v20 for
    vars c29 and c29;
    vars v20 and v20;
  enddef;
  def map between c29 and v21 for
    vars c29 and c29;
    vars v21 and v21;
  enddef;
  def map between c29 and v111 for
    vars c29 and c29;
    vars v111 and v111;
  enddef;
  def map between c29 and v112 for
    vars c29 and c29;
    vars v112 and v112;
  enddef;
  def map between c30 and v33 for
    vars c30 and c30;
    vars v33 and v33;
  enddef;
  def map between c30 and v34 for
    vars c30 and c30;
    vars v34 and v34;
  enddef;
  def map between c30 and v35 for
    vars c30 and c30;
    vars v35 and v35;
  enddef;
  def map between c30 and v80 for
    vars c30 and c30;
    vars v80 and v80;
  enddef;
  def map between c30 and v41 for
    vars c30 and c30;
    vars v41 and v41;
  enddef;
  def map between c30 and v83 for
    vars c30 and c30;
    vars v83 and v83;
  enddef;
  def map between c31 and v36 for
    vars v36 and v36;
  enddef;
  def map between c31 and v69 for
    vars c31 and c31;
    vars v69 and v69;
  enddef;
  def map between c31 and v22 for
    vars c31 and c31;
    vars v22 and v22;
  enddef;
  def map between c32 and v22 for
    vars c32 and c32;
    vars v22 and v22;
  enddef;
  def map between c32 and v23 for
    vars c32 and c32;
    vars v23 and v23;
  enddef;
  def map between c32 and v103 for
    vars c32 and c32;
    vars v103 and v103;
  enddef;
  def map between c33 and v23 for
    vars c33 and c33;
    vars v23 and v23;
  enddef;
  def map between c33 and v37 for
    vars c33 and c33;
    vars v37 and v37;
  enddef;
  def map between c33 and v24 for
    vars c33 and c33;
    vars v24 and v24;
  enddef;
  def map between c33 and v41 for
    vars c33 and c33;
    vars v41 and v41;
  enddef;
  def map between c33 and v104 for
    vars c33 and c33;
    vars v104 and v104;
  enddef;
  def map between c34 and v24 for
    vars c34 and c34;
    vars v24 and v24;
  enddef;
  def map between c34 and v25 for
    vars c34 and c34;
    vars v25 and v25;
  enddef;
  def map between c34 and v39 for
    vars c34 and c34;
    vars v39 and v39;
  enddef;
  def map between c34 and v114 for
    vars c34 and c34;
    vars v114 and v114;
  enddef;
  def map between c34 and v115 for
    vars c34 and c34;
    vars v115 and v115;
  enddef;
  def map between c35 and v41 for
    vars c35 and c35;
    vars v41 and v41;
  enddef;
  def map between c35 and v25 for
    vars c35 and c35;
    vars v25 and v25;
  enddef;
  def map between c35 and v26 for
    vars c35 and c35;
    vars v26 and v26;
  enddef;
  def map between c35 and v27 for
    vars c35 and c35;
    vars v27 and v27;
  enddef;
  def map between c35 and v30 for
    vars c35 and c35;
    vars v30 and v30;
  enddef;
  def map between c35 and v31 for
    vars c35 and c35;
    vars v31 and v31;
  enddef;
  def map between c35 and v32 for
    vars c35 and c35;
    vars v32 and v32;
  enddef;
  def map between c35 and v117 for
    vars c35 and c35;
    vars v117 and v117;
  enddef;
  def map between c35 and v118 for
    vars c35 and c35;
    vars v118 and v118;
  enddef;
  def map between c36 and v26 for
    vars c36 and c36;
    vars v26 and v26;
  enddef;
  def map between c36 and v27 for
    vars c36 and c36;
    vars v27 and v27;
  enddef;
  def map between c36 and v120 for
    vars c36 and c36;
    vars v120 and v120;
  enddef;
  def map between c36 and v121 for
    vars c36 and c36;
    vars v121 and v121;
  enddef;
  def map between c37 and v124 for
    vars c37 and c37;
    vars v124 and v124;
  enddef;
  def map between c37 and v30 for
    vars c37 and c37;
    vars v30 and v30;
  enddef;
  def map between c37 and v31 for
    vars c37 and c37;
    vars v31 and v31;
  enddef;
  def map between c37 and v123 for
    vars c37 and c37;
    vars v123 and v123;
  enddef;
  def map between c38 and v32 for
    vars c38 and c38;
    vars v32 and v32;
  enddef;
  def map between c38 and v33 for
    vars c38 and c38;
    vars v33 and v33;
  enddef;
  def map between c38 and v40 for
    vars c38 and c38;
    vars v40 and v40;
  enddef;
  def map between c38 and v79 for
    vars c38 and c38;
    vars v79 and v79;
  enddef;
  def map between c39 and v38 for
    vars c39 and c39;
    vars v38 and v38;
  enddef;
  def map between c39 and v39 for
    vars c39 and c39;
    vars v39 and v39;
  enddef;
  def map between c39 and v40 for
    vars c39 and c39;
    vars v40 and v40;
  enddef;
  def map between c39 and v82 for
    vars c39 and c39;
    vars v82 and v82;
  enddef;
  def map between c40 and v33 for
    vars c40 and c40;
    vars v33 and v33;
  enddef;
  def map between c40 and v36 for
    vars c40 and c40;
    vars v36 and v36;
  enddef;
  def map between c40 and v37 for
    vars c40 and c40;
    vars v37 and v37;
  enddef;
  def map between c40 and v38 for
    vars c40 and c40;
    vars v38 and v38;
  enddef;
  def map between c40 and v81 for
    vars c40 and c40;
    vars v81 and v81;
  enddef;
  def map between c41 and v28 for
    vars c41 and c41;
    vars v28 and v28;
  enddef;
  def map between c41 and v43 for
    vars v43 and v43;
  enddef;
  def map between c41 and v75 for
    vars c41 and c41;
    vars v75 and v75;
  enddef;
  def map between c41 and v85 for
    vars v85 and v85;
  enddef;
  def map between c42 and v28 for
    vars c42 and c42;
    vars v28 and v28;
  enddef;
  def map between c42 and v29 for
    vars c42 and c42;
    vars v29 and v29;
  enddef;
  def map between c43 and v20 for
    vars c43 and c43;
    vars v20 and v20;
  enddef;
  def map between c43 and v29 for
    vars c43 and c43;
    vars v29 and v29;
  enddef;
  def map between c43 and v30 for
    vars c43 and c43;
    vars v30 and v30;
  enddef;
  def map between c44 and v42 for
    vars c44 and c44;
    vars v42 and v42;
  enddef;
  def map between c44 and v43 for
    vars v43 and v43;
  enddef;
  def map between c44 and v84 for
    vars c44 and c44;
    vars v84 and v84;
  enddef;
  def map between c44 and v85 for
    vars v85 and v85;
  enddef;
  def map between c45 and v29 for
    vars c45 and c45;
    vars v29 and v29;
  enddef;
  def map between c45 and v42 for
    vars c45 and c45;
    vars v42 and v42;
  enddef;
  def map between c45 and v44 for
    vars c45 and c45;
    vars v44 and v44;
  enddef;
  def map between c45 and v45 for
    vars v45 and v45;
  enddef;
  def map between c45 and v46 for
    vars c45 and c45;
    vars v46 and v46;
  enddef;
  def map between c45 and v47 for
    vars v47 and v47;
  enddef;
  def map between c46 and v42 for
    vars c46 and c46;
    vars v42 and v42;
  enddef;
  def map between c46 and v43 for
    vars c46 and c46;
    vars v43 and v43;
  enddef;
  def map between c47 and v44 for
    vars c47 and c47;
    vars v44 and v44;
  enddef;
  def map between c47 and v51 for
    vars v51 and v51;
  enddef;
  def map between c47 and v86 for
    vars c47 and c47;
    vars v86 and v86;
  enddef;
  def map between c47 and v93 for
    vars v93 and v93;
  enddef;
  def map between c48 and v44 for
    vars c48 and c48;
    vars v44 and v44;
  enddef;
  def map between c48 and v45 for
    vars c48 and c48;
    vars v45 and v45;
  enddef;
  def map between c49 and v45 for
    vars v45 and v45;
  enddef;
  def map between c49 and v46 for
    vars c49 and c49;
    vars v46 and v46;
  enddef;
  def map between c49 and v49 for
    vars v49 and v49;
  enddef;
  def map between c49 and v50 for
    vars c49 and c49;
    vars v50 and v50;
  enddef;
  def map between c50 and v46 for
    vars c50 and c50;
    vars v46 and v46;
  enddef;
  def map between c50 and v47 for
    vars c50 and c50;
    vars v47 and v47;
  enddef;
  def map between c51 and v47 for
    vars v47 and v47;
  enddef;
  def map between c51 and v48 for
    vars c51 and c51;
    vars v48 and v48;
  enddef;
  def map between c51 and v52 for
    vars c51 and c51;
    vars v52 and v52;
  enddef;
  def map between c51 and v53 for
    vars v53 and v53;
  enddef;
  def map between c51 and v54 for
    vars c51 and c51;
    vars v54 and v54;
  enddef;
  def map between c51 and v55 for
    vars v55 and v55;
  enddef;
  def map between c52 and v48 for
    vars c52 and c52;
    vars v48 and v48;
  enddef;
  def map between c52 and v49 for
    vars c52 and c52;
    vars v49 and v49;
  enddef;
  def map between c53 and v48 for
    vars c53 and c53;
    vars v48 and v48;
  enddef;
  def map between c53 and v49 for
    vars v49 and v49;
  enddef;
  def map between c53 and v50 for
    vars c53 and c53;
    vars v50 and v50;
  enddef;
  def map between c53 and v51 for
    vars v51 and v51;
  enddef;
  def map between c53 and v90 for
    vars c53 and c53;
    vars v90 and v90;
  enddef;
  def map between c53 and v91 for
    vars v91 and v91;
  enddef;
  def map between c53 and v92 for
    vars c53 and c53;
    vars v92 and v92;
  enddef;
  def map between c53 and v93 for
    vars v93 and v93;
  enddef;
  def map between c54 and v50 for
    vars c54 and c54;
    vars v50 and v50;
  enddef;
  def map between c54 and v51 for
    vars c54 and c54;
    vars v51 and v51;
  enddef;
  def map between c55 and v52 for
    vars c55 and c55;
    vars v52 and v52;
  enddef;
  def map between c55 and v59 for
    vars v59 and v59;
  enddef;
  def map between c55 and v94 for
    vars c55 and c55;
    vars v94 and v94;
  enddef;
  def map between c55 and v101 for
    vars v101 and v101;
  enddef;
  def map between c56 and v52 for
    vars c56 and c56;
    vars v52 and v52;
  enddef;
  def map between c56 and v53 for
    vars c56 and c56;
    vars v53 and v53;
  enddef;
  def map between c57 and v53 for
    vars v53 and v53;
  enddef;
  def map between c57 and v57 for
    vars v57 and v57;
  enddef;
  def map between c57 and v58 for
    vars c57 and c57;
    vars v58 and v58;
  enddef;
  def map between c57 and v54 for
    vars c57 and c57;
    vars v54 and v54;
  enddef;
  def map between c58 and v54 for
    vars c58 and c58;
    vars v54 and v54;
  enddef;
  def map between c58 and v55 for
    vars c58 and c58;
    vars v55 and v55;
  enddef;
  def map between c59 and v55 for
    vars v55 and v55;
  enddef;
  def map between c59 and v56 for
    vars c59 and c59;
    vars v56 and v56;
  enddef;
  def map between c60 and v56 for
    vars c60 and c60;
    vars v56 and v56;
  enddef;
  def map between c60 and v57 for
    vars v57 and v57;
  enddef;
  def map between c60 and v58 for
    vars c60 and c60;
    vars v58 and v58;
  enddef;
  def map between c60 and v59 for
    vars v59 and v59;
  enddef;
  def map between c60 and v98 for
    vars c60 and c60;
    vars v98 and v98;
  enddef;
  def map between c60 and v99 for
    vars v99 and v99;
  enddef;
  def map between c60 and v100 for
    vars c60 and c60;
    vars v100 and v100;
  enddef;
  def map between c60 and v101 for
    vars v101 and v101;
  enddef;
  def map between c61 and v56 for
    vars c61 and c61;
    vars v56 and v56;
  enddef;
  def map between c61 and v57 for
    vars c61 and c61;
    vars v57 and v57;
  enddef;
  def map between c62 and v58 for
    vars c62 and c62;
    vars v58 and v58;
  enddef;
  def map between c62 and v59 for
    vars c62 and c62;
    vars v59 and v59;
  enddef;
  def map between c63 and v69 for
    vars c63 and c63;
    vars v69 and v69;
  enddef;
  def map between c63 and v70 for
    vars c63 and c63;
    vars v70 and v70;
  enddef;
  def map between c63 and v103 for
    vars c63 and c63;
    vars v103 and v103;
  enddef;
  def map between c64 and v70 for
    vars c64 and c64;
    vars v70 and v70;
  enddef;
  def map between c64 and v71 for
    vars c64 and c64;
    vars v71 and v71;
  enddef;
  def map between c64 and v81 for
    vars c64 and c64;
    vars v81 and v81;
  enddef;
  def map between c64 and v83 for
    vars c64 and c64;
    vars v83 and v83;
  enddef;
  def map between c64 and v104 for
    vars c64 and c64;
    vars v104 and v104;
  enddef;
  def map between c65 and v71 for
    vars c65 and c65;
    vars v71 and v71;
  enddef;
  def map between c65 and v82 for
    vars c65 and c65;
    vars v82 and v82;
  enddef;
  def map between c65 and v114 for
    vars c65 and c65;
    vars v114 and v114;
  enddef;
  def map between c65 and v72 for
    vars c65 and c65;
    vars v72 and v72;
  enddef;
  def map between c65 and v116 for
    vars v116 and v116;
  enddef;
  def map between c66 and v72 for
    vars c66 and c66;
    vars v72 and v72;
  enddef;
  def map between c66 and v73 for
    vars c66 and c66;
    vars v73 and v73;
  enddef;
  def map between c66 and v74 for
    vars c66 and c66;
    vars v74 and v74;
  enddef;
  def map between c66 and v77 for
    vars c66 and c66;
    vars v77 and v77;
  enddef;
  def map between c66 and v78 for
    vars c66 and c66;
    vars v78 and v78;
  enddef;
  def map between c66 and v79 for
    vars c66 and c66;
    vars v79 and v79;
  enddef;
  def map between c66 and v83 for
    vars c66 and c66;
    vars v83 and v83;
  enddef;
  def map between c66 and v117 for
    vars c66 and c66;
    vars v117 and v117;
  enddef;
  def map between c66 and v119 for
    vars v119 and v119;
  enddef;
  def map between c67 and v73 for
    vars c67 and c67;
    vars v73 and v73;
  enddef;
  def map between c67 and v74 for
    vars c67 and c67;
    vars v74 and v74;
  enddef;
  def map between c67 and v120 for
    vars c67 and c67;
    vars v120 and v120;
  enddef;
  def map between c67 and v122 for
    vars v122 and v122;
  enddef;
  def map between c68 and v77 for
    vars c68 and c68;
    vars v77 and v77;
  enddef;
  def map between c68 and v78 for
    vars c68 and c68;
    vars v78 and v78;
  enddef;
  def map between c68 and v123 for
    vars c68 and c68;
    vars v123 and v123;
  enddef;
  def map between c68 and v125 for
    vars v125 and v125;
  enddef;
  def map between c69 and v74 for
    vars c69 and c69;
    vars v74 and v74;
  enddef;
  def map between c69 and v66 for
    vars c69 and c69;
    vars v66 and v66;
  enddef;
  def map between c69 and v75 for
    vars c69 and c69;
    vars v75 and v75;
  enddef;
  def map between c70 and v75 for
    vars c70 and c70;
    vars v75 and v75;
  enddef;
  def map between c70 and v76 for
    vars c70 and c70;
    vars v76 and v76;
  enddef;
  def map between c71 and v67 for
    vars c71 and c71;
    vars v67 and v67;
  enddef;
  def map between c71 and v76 for
    vars c71 and c71;
    vars v76 and v76;
  enddef;
  def map between c71 and v77 for
    vars c71 and c71;
    vars v77 and v77;
  enddef;
  def map between c72 and v76 for
    vars c72 and c72;
    vars v76 and v76;
  enddef;
  def map between c72 and v84 for
    vars c72 and c72;
    vars v84 and v84;
  enddef;
  def map between c72 and v86 for
    vars c72 and c72;
    vars v86 and v86;
  enddef;
  def map between c72 and v87 for
    vars v87 and v87;
  enddef;
  def map between c72 and v88 for
    vars c72 and c72;
    vars v88 and v88;
  enddef;
  def map between c72 and v89 for
    vars v89 and v89;
  enddef;
  def map between c73 and v84 for
    vars c73 and c73;
    vars v84 and v84;
  enddef;
  def map between c73 and v85 for
    vars c73 and c73;
    vars v85 and v85;
  enddef;
  def map between c74 and v86 for
    vars c74 and c74;
    vars v86 and v86;
  enddef;
  def map between c74 and v87 for
    vars c74 and c74;
    vars v87 and v87;
  enddef;
  def map between c75 and v87 for
    vars v87 and v87;
  enddef;
  def map between c75 and v88 for
    vars c75 and c75;
    vars v88 and v88;
  enddef;
  def map between c75 and v91 for
    vars v91 and v91;
  enddef;
  def map between c75 and v92 for
    vars c75 and c75;
    vars v92 and v92;
  enddef;
  def map between c76 and v88 for
    vars c76 and c76;
    vars v88 and v88;
  enddef;
  def map between c76 and v89 for
    vars c76 and c76;
    vars v89 and v89;
  enddef;
  def map between c77 and v89 for
    vars v89 and v89;
  enddef;
  def map between c77 and v90 for
    vars c77 and c77;
    vars v90 and v90;
  enddef;
  def map between c77 and v94 for
    vars c77 and c77;
    vars v94 and v94;
  enddef;
  def map between c77 and v95 for
    vars v95 and v95;
  enddef;
  def map between c77 and v96 for
    vars c77 and c77;
    vars v96 and v96;
  enddef;
  def map between c77 and v97 for
    vars v97 and v97;
  enddef;
  def map between c78 and v90 for
    vars c78 and c78;
    vars v90 and v90;
  enddef;
  def map between c78 and v91 for
    vars c78 and c78;
    vars v91 and v91;
  enddef;
  def map between c79 and v92 for
    vars c79 and c79;
    vars v92 and v92;
  enddef;
  def map between c79 and v93 for
    vars c79 and c79;
    vars v93 and v93;
  enddef;
  def map between c80 and v94 for
    vars c80 and c80;
    vars v94 and v94;
  enddef;
  def map between c80 and v95 for
    vars c80 and c80;
    vars v95 and v95;
  enddef;
  def map between c81 and v95 for
    vars v95 and v95;
  enddef;
  def map between c81 and v96 for
    vars c81 and c81;
    vars v96 and v96;
  enddef;
  def map between c81 and v99 for
    vars v99 and v99;
  enddef;
  def map between c81 and v100 for
    vars c81 and c81;
    vars v100 and v100;
  enddef;
  def map between c82 and v96 for
    vars c82 and c82;
    vars v96 and v96;
  enddef;
  def map between c82 and v97 for
    vars c82 and c82;
    vars v97 and v97;
  enddef;
  def map between c83 and v97 for
    vars v97 and v97;
  enddef;
  def map between c83 and v98 for
    vars c83 and c83;
    vars v98 and v98;
  enddef;
  def map between c84 and v98 for
    vars c84 and c84;
    vars v98 and v98;
  enddef;
  def map between c84 and v99 for
    vars c84 and c84;
    vars v99 and v99;
  enddef;
  def map between c85 and v100 for
    vars c85 and c85;
    vars v100 and v100;
  enddef;
  def map between c85 and v101 for
    vars c85 and c85;
    vars v101 and v101;
  enddef;
  def map between c86 and v60 for
    vars v60 and v60;
  enddef;
  def map between c87 and v62 for
    vars v62 and v62;
  enddef;
  def map between c88 and v106 for
    vars c88 and c88;
    vars v106 and v106;
  enddef;
  def map between c88 and v107 for
    vars c88 and c88;
    vars v107 and v107;
  enddef;
  def map between c89 and v109 for
    vars c89 and c89;
    vars v109 and v109;
  enddef;
  def map between c89 and v110 for
    vars c89 and c89;
    vars v110 and v110;
  enddef;
  def map between c90 and v112 for
    vars c90 and c90;
    vars v112 and v112;
  enddef;
  def map between c90 and v113 for
    vars c90 and c90;
    vars v113 and v113;
  enddef;
  def map between c91 and v115 for
    vars c91 and c91;
    vars v115 and v115;
  enddef;
  def map between c91 and v116 for
    vars c91 and c91;
    vars v116 and v116;
  enddef;
  def map between c92 and v118 for
    vars c92 and c92;
    vars v118 and v118;
  enddef;
  def map between c92 and v119 for
    vars c92 and c92;
    vars v119 and v119;
  enddef;
  def map between c93 and v121 for
    vars c93 and c93;
    vars v121 and v121;
  enddef;
  def map between c93 and v122 for
    vars c93 and c93;
    vars v122 and v122;
  enddef;
  def map between c94 and v124 for
    vars c94 and c94;
    vars v124 and v124;
  enddef;
  def map between c94 and v125 for
    vars c94 and c94;
    vars v125 and v125;
  enddef;
  def map between Raf_activation and c45 for
    vars c45 and c45;
  enddef;
  def map between Raf_activation and c46 for
    vars c46 and c46;
  enddef;
  def map between Raf_activation and c48 for
    vars c48 and c48;
  enddef;
  def map between Raf_activation and c50 for
    vars c50 and c50;
  enddef;
  def map between Raf_activation and c72 for
    vars c72 and c72;
  enddef;
  def map between Raf_activation and c73 for
    vars c73 and c73;
  enddef;
  def map between Raf_activation and c74 for
    vars c74 and c74;
  enddef;
  def map between Raf_activation and c76 for
    vars c76 and c76;
  enddef;
  def map between MEKPP_total and c51 for
    vars c51 and c51;
  enddef;
  def map between MEKPP_total and c77 for
    vars c77 and c77;
  enddef;
  def map between ERKPP_total and c59 for
    vars c59 and c59;
  enddef;
  def map between ERKPP_total and c83 for
    vars c83 and c83;
  enddef;
  def map between Ras_GTP_total and c42 for
    vars c42 and c42;
  enddef;
  def map between Ras_GTP_total and c28 for
    vars c28 and c28;
  enddef;
  def map between Ras_GTP_total and c70 for
    vars c70 and c70;
  enddef;
  def map between Ras_GTP_total and c69 for
    vars c69 and c69;
  enddef;
  def map between ShcP_total and c33 for
    vars c33 and c33;
  enddef;
  def map between ShcP_total and c34 for
    vars c34 and c34;
  enddef;
  def map between ShcP_total and c35 for
    vars c35 and c35;
  enddef;
  def map between ShcP_total and c36 for
    vars c36 and c36;
  enddef;
  def map between ShcP_total and c37 for
    vars c37 and c37;
  enddef;
  def map between ShcP_total and c38 for
    vars c38 and c38;
  enddef;
  def map between ShcP_total and c39 for
    vars c39 and c39;
  enddef;
  def map between ShcP_total and c40 for
    vars c40 and c40;
  enddef;
  def map between ShcP_total and c64 for
    vars c64 and c64;
  enddef;
  def map between ShcP_total and c65 for
    vars c65 and c65;
  enddef;
  def map between ShcP_total and c66 for
    vars c66 and c66;
  enddef;
  def map between ShcP_total and c67 for
    vars c67 and c67;
  enddef;
  def map between ShcP_total and c68 for
    vars c68 and c68;
  enddef;
  def map between ShcP_total and c91 for
    vars c91 and c91;
  enddef;
  def map between ShcP_total and c92 for
    vars c92 and c92;
  enddef;
  def map between ShcP_total and c93 for
    vars c93 and c93;
  enddef;
  def map between ShcP_total and c94 for
    vars c94 and c94;
  enddef;
  def map between EGF_EGFR_totalx2 and c5 for
    vars c5 and c5;
  enddef;
  def map between EGF_EGFR_totalx2 and c7 for
    vars c7 and c7;
  enddef;
  def map between EGF_EGFR_totalx2 and c8 for
    vars c8 and c8;
  enddef;
  def map between EGF_EGFR_totalx2 and c11 for
    vars c11 and c11;
  enddef;
  def map between EGF_EGFR_totalx2 and c15 for
    vars c15 and c15;
  enddef;
  def map between EGF_EGFR_totalx2 and c17 for
    vars c17 and c17;
  enddef;
  def map between EGF_EGFR_totalx2 and c18 for
    vars c18 and c18;
  enddef;
  def map between EGF_EGFR_totalx2 and c19 for
    vars c19 and c19;
  enddef;
  def map between EGF_EGFR_totalx2 and c20 for
    vars c20 and c20;
  enddef;
  def map between EGF_EGFR_totalx2 and c21 for
    vars c21 and c21;
  enddef;
  def map between EGF_EGFR_totalx2 and c23 for
    vars c23 and c23;
  enddef;
  def map between EGF_EGFR_totalx2 and c25 for
    vars c25 and c25;
  enddef;
  def map between EGF_EGFR_totalx2 and c27 for
    vars c27 and c27;
  enddef;
  def map between EGF_EGFR_totalx2 and c29 for
    vars c29 and c29;
  enddef;
  def map between EGF_EGFR_totalx2 and c32 for
    vars c32 and c32;
  enddef;
  def map between EGF_EGFR_totalx2 and c33 for
    vars c33 and c33;
  enddef;
  def map between EGF_EGFR_totalx2 and c34 for
    vars c34 and c34;
  enddef;
  def map between EGF_EGFR_totalx2 and c35 for
    vars c35 and c35;
  enddef;
  def map between EGF_EGFR_totalx2 and c36 for
    vars c36 and c36;
  enddef;
  def map between EGF_EGFR_totalx2 and c37 for
    vars c37 and c37;
  enddef;
  def map between EGF_EGFR_totalx2 and c63 for
    vars c63 and c63;
  enddef;
  def map between EGF_EGFR_totalx2 and c64 for
    vars c64 and c64;
  enddef;
  def map between EGF_EGFR_totalx2 and c65 for
    vars c65 and c65;
  enddef;
  def map between EGF_EGFR_totalx2 and c66 for
    vars c66 and c66;
  enddef;
  def map between EGF_EGFR_totalx2 and c67 for
    vars c67 and c67;
  enddef;
  def map between EGF_EGFR_totalx2 and c68 for
    vars c68 and c68;
  enddef;
  def map between EGF_EGFR_totalx2 and c88 for
    vars c88 and c88;
  enddef;
  def map between EGF_EGFR_totalx2 and c89 for
    vars c89 and c89;
  enddef;
  def map between EGF_EGFR_totalx2 and c90 for
    vars c90 and c90;
  enddef;
  def map between EGF_EGFR_totalx2 and c91 for
    vars c91 and c91;
  enddef;
  def map between EGF_EGFR_totalx2 and c92 for
    vars c92 and c92;
  enddef;
  def map between EGF_EGFR_totalx2 and c93 for
    vars c93 and c93;
  enddef;
  def map between EGF_EGFR_totalx2 and c94 for
    vars c94 and c94;
  enddef;
  def map between c1 and environment for
    vars time and time;
  enddef;
  def map between c2 and environment for
    vars time and time;
  enddef;
  def map between c3 and environment for
    vars time and time;
  enddef;
  def map between c4 and environment for
    vars time and time;
  enddef;
  def map between c5 and environment for
    vars time and time;
  enddef;
  def map between c6 and environment for
    vars time and time;
  enddef;
  def map between c7 and environment for
    vars time and time;
  enddef;
  def map between c8 and environment for
    vars time and time;
  enddef;
  def map between c9 and environment for
    vars time and time;
  enddef;
  def map between c10 and environment for
    vars time and time;
  enddef;
  def map between c11 and environment for
    vars time and time;
  enddef;
  def map between c12 and environment for
    vars time and time;
  enddef;
  def map between c13 and environment for
    vars time and time;
  enddef;
  def map between c14 and environment for
    vars time and time;
  enddef;
  def map between c15 and environment for
    vars time and time;
  enddef;
  def map between c16 and environment for
    vars time and time;
  enddef;
  def map between c18 and environment for
    vars time and time;
  enddef;
  def map between c19 and environment for
    vars time and time;
  enddef;
  def map between c20 and environment for
    vars time and time;
  enddef;
  def map between c21 and environment for
    vars time and time;
  enddef;
  def map between c22 and environment for
    vars time and time;
  enddef;
  def map between c23 and environment for
    vars time and time;
  enddef;
  def map between c17 and environment for
    vars time and time;
  enddef;
  def map between c24 and environment for
    vars time and time;
  enddef;
  def map between c25 and environment for
    vars time and time;
  enddef;
  def map between c26 and environment for
    vars time and time;
  enddef;
  def map between c27 and environment for
    vars time and time;
  enddef;
  def map between c28 and environment for
    vars time and time;
  enddef;
  def map between c29 and environment for
    vars time and time;
  enddef;
  def map between c30 and environment for
    vars time and time;
  enddef;
  def map between c31 and environment for
    vars time and time;
  enddef;
  def map between c32 and environment for
    vars time and time;
  enddef;
  def map between c33 and environment for
    vars time and time;
  enddef;
  def map between c34 and environment for
    vars time and time;
  enddef;
  def map between c35 and environment for
    vars time and time;
  enddef;
  def map between c36 and environment for
    vars time and time;
  enddef;
  def map between c37 and environment for
    vars time and time;
  enddef;
  def map between c38 and environment for
    vars time and time;
  enddef;
  def map between c39 and environment for
    vars time and time;
  enddef;
  def map between c40 and environment for
    vars time and time;
  enddef;
  def map between c41 and environment for
    vars time and time;
  enddef;
  def map between c42 and environment for
    vars time and time;
  enddef;
  def map between c43 and environment for
    vars time and time;
  enddef;
  def map between c44 and environment for
    vars time and time;
  enddef;
  def map between c45 and environment for
    vars time and time;
  enddef;
  def map between c46 and environment for
    vars time and time;
  enddef;
  def map between c47 and environment for
    vars time and time;
  enddef;
  def map between c48 and environment for
    vars time and time;
  enddef;
  def map between c49 and environment for
    vars time and time;
  enddef;
  def map between c50 and environment for
    vars time and time;
  enddef;
  def map between c51 and environment for
    vars time and time;
  enddef;
  def map between c52 and environment for
    vars time and time;
  enddef;
  def map between c53 and environment for
    vars time and time;
  enddef;
  def map between c54 and environment for
    vars time and time;
  enddef;
  def map between c55 and environment for
    vars time and time;
  enddef;
  def map between c56 and environment for
    vars time and time;
  enddef;
  def map between c57 and environment for
    vars time and time;
  enddef;
  def map between c58 and environment for
    vars time and time;
  enddef;
  def map between c59 and environment for
    vars time and time;
  enddef;
  def map between c60 and environment for
    vars time and time;
  enddef;
  def map between c61 and environment for
    vars time and time;
  enddef;
  def map between c62 and environment for
    vars time and time;
  enddef;
  def map between c63 and environment for
    vars time and time;
  enddef;
  def map between c64 and environment for
    vars time and time;
  enddef;
  def map between c65 and environment for
    vars time and time;
  enddef;
  def map between c66 and environment for
    vars time and time;
  enddef;
  def map between c67 and environment for
    vars time and time;
  enddef;
  def map between c68 and environment for
    vars time and time;
  enddef;
  def map between c69 and environment for
    vars time and time;
  enddef;
  def map between c70 and environment for
    vars time and time;
  enddef;
  def map between c71 and environment for
    vars time and time;
  enddef;
  def map between c72 and environment for
    vars time and time;
  enddef;
  def map between c73 and environment for
    vars time and time;
  enddef;
  def map between c74 and environment for
    vars time and time;
  enddef;
  def map between c75 and environment for
    vars time and time;
  enddef;
  def map between c76 and environment for
    vars time and time;
  enddef;
  def map between c77 and environment for
    vars time and time;
  enddef;
  def map between c78 and environment for
    vars time and time;
  enddef;
  def map between c79 and environment for
    vars time and time;
  enddef;
  def map between c80 and environment for
    vars time and time;
  enddef;
  def map between c81 and environment for
    vars time and time;
  enddef;
  def map between c82 and environment for
    vars time and time;
  enddef;
  def map between c83 and environment for
    vars time and time;
  enddef;
  def map between c84 and environment for
    vars time and time;
  enddef;
  def map between c85 and environment for
    vars time and time;
  enddef;
  def map between c86 and environment for
    vars time and time;
  enddef;
  def map between c87 and environment for
    vars time and time;
  enddef;
  def map between c88 and environment for
    vars time and time;
  enddef;
  def map between c89 and environment for
    vars time and time;
  enddef;
  def map between c90 and environment for
    vars time and time;
  enddef;
  def map between c91 and environment for
    vars time and time;
  enddef;
  def map between c92 and environment for
    vars time and time;
  enddef;
  def map between c93 and environment for
    vars time and time;
  enddef;
  def map between c94 and environment for
    vars time and time;
  enddef;
  def map between C and c1 for
    vars c1 and c1;
  enddef;
  def map between C and reaction_rates for
    vars k1 and k1;
    vars kd1 and kd1;
    vars C and C;
  enddef;
  def map between v1 and reaction_rates for
    vars k1 and k1;
    vars kd1 and kd1;
  enddef;
  def map between v2 and reaction_rates for
    vars k2 and k2;
    vars kd2 and kd2;
  enddef;
  def map between v3 and reaction_rates for
    vars k3 and k3;
    vars kd3 and kd3;
  enddef;
  def map between v4 and reaction_rates for
    vars k4 and k4;
    vars kd4 and kd4;
  enddef;
  def map between v5 and reaction_rates for
    vars k5 and k5;
  enddef;
  def map between v6 and reaction_rates for
    vars k6 and k6;
    vars kd6 and kd6;
  enddef;
  def map between v7 and reaction_rates for
    vars k6 and k6;
  enddef;
  def map between v8 and reaction_rates for
    vars k8 and k8;
    vars kd8 and kd8;
  enddef;
  def map between v9 and reaction_rates for
    vars k6 and k6;
  enddef;
  def map between v10 and reaction_rates for
    vars k10b and k10b;
    vars kd10 and kd10;
  enddef;
  def map between v11 and reaction_rates for
    vars k2 and k2;
    vars kd2 and kd2;
  enddef;
  def map between v12 and reaction_rates for
    vars k3 and k3;
    vars kd3 and kd3;
  enddef;
  def map between v13 and reaction_rates for
    vars k13 and k13;
  enddef;
  def map between v14 and reaction_rates for
    vars k8 and k8;
    vars kd8 and kd8;
  enddef;
  def map between v15 and reaction_rates for
    vars k15 and k15;
  enddef;
  def map between v16 and reaction_rates for
    vars k16 and k16;
    vars kd16 and kd16;
  enddef;
  def map between v18 and reaction_rates for
    vars k18 and k18;
    vars kd18 and kd18;
  enddef;
  def map between v19 and reaction_rates for
    vars k19 and k19;
    vars kd19 and kd19;
  enddef;
  def map between v20 and reaction_rates for
    vars k20 and k20;
    vars kd20 and kd20;
  enddef;
  def map between v21 and reaction_rates for
    vars k21 and k21;
    vars kd21 and kd21;
  enddef;
  def map between v22 and reaction_rates for
    vars k22 and k22;
    vars kd22 and kd22;
  enddef;
  def map between v23 and reaction_rates for
    vars k23 and k23;
    vars kd23 and kd23;
  enddef;
  def map between v17 and reaction_rates for
    vars k17 and k17;
    vars kd17 and kd17;
  enddef;
  def map between v24 and reaction_rates for
    vars k16 and k16;
    vars kd24 and kd24;
  enddef;
  def map between v25 and reaction_rates for
    vars k25 and k25;
    vars kd25 and kd25;
  enddef;
  def map between v26 and reaction_rates for
    vars k18 and k18;
    vars kd18 and kd18;
  enddef;
  def map between v27 and reaction_rates for
    vars k19 and k19;
    vars kd19 and kd19;
  enddef;
  def map between v28 and reaction_rates for
    vars k28 and k28;
    vars kd28 and kd28;
  enddef;
  def map between v29 and reaction_rates for
    vars k29 and k29;
    vars kd29 and kd29;
  enddef;
  def map between v30 and reaction_rates for
    vars k20 and k20;
    vars kd20 and kd20;
  enddef;
  def map between v31 and reaction_rates for
    vars k21 and k21;
    vars kd21 and kd21;
  enddef;
  def map between v32 and reaction_rates for
    vars k32 and k32;
    vars kd32 and kd32;
  enddef;
  def map between v33 and reaction_rates for
    vars k33 and k33;
    vars kd33 and kd33;
  enddef;
  def map between v34 and reaction_rates for
    vars k34 and k34;
    vars kd34 and kd34;
  enddef;
  def map between v35 and reaction_rates for
    vars k35 and k35;
    vars kd35 and kd35;
  enddef;
  def map between v36 and reaction_rates for
    vars Km36 and Km36;
    vars Vm36 and Vm36;
  enddef;
  def map between v37 and reaction_rates for
    vars k37 and k37;
    vars kd37 and kd37;
  enddef;
  def map between v38 and reaction_rates for
    vars k16 and k16;
    vars kd24 and kd24;
  enddef;
  def map between v39 and reaction_rates for
    vars k37 and k37;
    vars kd37 and kd37;
  enddef;
  def map between v40 and reaction_rates for
    vars k40 and k40;
    vars kd40 and kd40;
  enddef;
  def map between v41 and reaction_rates for
    vars k41 and k41;
    vars kd41 and kd41;
  enddef;
  def map between v42 and reaction_rates for
    vars k42 and k42;
    vars kd42 and kd42;
  enddef;
  def map between v43 and reaction_rates for
    vars k43 and k43;
  enddef;
  def map between v44 and reaction_rates for
    vars k44 and k44;
    vars kd44 and kd44;
  enddef;
  def map between v45 and reaction_rates for
    vars k45 and k45;
  enddef;
  def map between v46 and reaction_rates for
    vars k44 and k44;
    vars kd44 and kd44;
  enddef;
  def map between v47 and reaction_rates for
    vars k47 and k47;
  enddef;
  def map between v48 and reaction_rates for
    vars k48 and k48;
    vars kd48 and kd48;
  enddef;
  def map between v49 and reaction_rates for
    vars k49 and k49;
  enddef;
  def map between v50 and reaction_rates for
    vars k50 and k50;
    vars kd50 and kd50;
  enddef;
  def map between v51 and reaction_rates for
    vars k49 and k49;
  enddef;
  def map between v52 and reaction_rates for
    vars k52 and k52;
    vars kd52 and kd52;
  enddef;
  def map between v53 and reaction_rates for
    vars k53 and k53;
  enddef;
  def map between v54 and reaction_rates for
    vars k52 and k52;
    vars kd52 and kd52;
  enddef;
  def map between v55 and reaction_rates for
    vars k55 and k55;
  enddef;
  def map between v56 and reaction_rates for
    vars k56 and k56;
    vars kd56 and kd56;
  enddef;
  def map between v57 and reaction_rates for
    vars k57 and k57;
  enddef;
  def map between v58 and reaction_rates for
    vars k58 and k58;
    vars kd58 and kd58;
  enddef;
  def map between v59 and reaction_rates for
    vars k59 and k59;
  enddef;
  def map between v60 and reaction_rates for
    vars k60 and k60;
  enddef;
  def map between v61 and reaction_rates for
    vars k61 and k61;
  enddef;
  def map between v62 and reaction_rates for
    vars k60 and k60;
  enddef;
  def map between v63 and reaction_rates for
    vars k16 and k16;
    vars kd16 and kd16;
  enddef;
  def map between v64 and reaction_rates for
    vars k17 and k17;
    vars kd17 and kd17;
  enddef;
  def map between v65 and reaction_rates for
    vars k18 and k18;
    vars kd18 and kd18;
  enddef;
  def map between v66 and reaction_rates for
    vars k19 and k19;
    vars kd19 and kd19;
  enddef;
  def map between v67 and reaction_rates for
    vars k20 and k20;
    vars kd20 and kd20;
  enddef;
  def map between v68 and reaction_rates for
    vars k21 and k21;
    vars kd21 and kd21;
  enddef;
  def map between v69 and reaction_rates for
    vars k22 and k22;
    vars kd22 and kd22;
  enddef;
  def map between v70 and reaction_rates for
    vars k23 and k23;
    vars kd23 and kd23;
  enddef;
  def map between v71 and reaction_rates for
    vars k16 and k16;
    vars kd24 and kd24;
  enddef;
  def map between v72 and reaction_rates for
    vars k25 and k25;
    vars kd25 and kd25;
  enddef;
  def map between v73 and reaction_rates for
    vars k18 and k18;
    vars kd18 and kd18;
  enddef;
  def map between v74 and reaction_rates for
    vars k19 and k19;
    vars kd19 and kd19;
  enddef;
  def map between v75 and reaction_rates for
    vars k28 and k28;
    vars kd28 and kd28;
  enddef;
  def map between v76 and reaction_rates for
    vars k29 and k29;
    vars kd29 and kd29;
  enddef;
  def map between v77 and reaction_rates for
    vars k20 and k20;
    vars kd20 and kd20;
  enddef;
  def map between v78 and reaction_rates for
    vars k21 and k21;
    vars kd21 and kd21;
  enddef;
  def map between v79 and reaction_rates for
    vars k32 and k32;
    vars kd32 and kd32;
  enddef;
  def map between v80 and reaction_rates for
    vars k34 and k34;
    vars kd34 and kd34;
  enddef;
  def map between v81 and reaction_rates for
    vars k37 and k37;
    vars kd37 and kd37;
  enddef;
  def map between v82 and reaction_rates for
    vars k37 and k37;
    vars kd37 and kd37;
  enddef;
  def map between v83 and reaction_rates for
    vars k41 and k41;
    vars kd41 and kd41;
  enddef;
  def map between v84 and reaction_rates for
    vars k42 and k42;
    vars kd42 and kd42;
  enddef;
  def map between v85 and reaction_rates for
    vars k43 and k43;
  enddef;
  def map between v86 and reaction_rates for
    vars k44 and k44;
    vars kd44 and kd44;
  enddef;
  def map between v87 and reaction_rates for
    vars k45 and k45;
  enddef;
  def map between v88 and reaction_rates for
    vars k44 and k44;
    vars kd44 and kd44;
  enddef;
  def map between v89 and reaction_rates for
    vars k47 and k47;
  enddef;
  def map between v90 and reaction_rates for
    vars k48 and k48;
    vars kd48 and kd48;
  enddef;
  def map between v91 and reaction_rates for
    vars k49 and k49;
  enddef;
  def map between v92 and reaction_rates for
    vars k50 and k50;
    vars kd50 and kd50;
  enddef;
  def map between v93 and reaction_rates for
    vars k49 and k49;
  enddef;
  def map between v94 and reaction_rates for
    vars k52 and k52;
    vars kd52 and kd52;
  enddef;
  def map between v95 and reaction_rates for
    vars k53 and k53;
  enddef;
  def map between v96 and reaction_rates for
    vars k52 and k52;
    vars kd52 and kd52;
  enddef;
  def map between v97 and reaction_rates for
    vars k55 and k55;
  enddef;
  def map between v98 and reaction_rates for
    vars k56 and k56;
    vars kd56 and kd56;
  enddef;
  def map between v99 and reaction_rates for
    vars k57 and k57;
  enddef;
  def map between v100 and reaction_rates for
    vars k58 and k58;
    vars kd58 and kd58;
  enddef;
  def map between v101 and reaction_rates for
    vars k59 and k59;
  enddef;
  def map between v102 and reaction_rates for
    vars k6 and k6;
    vars kd6 and kd6;
  enddef;
  def map between v103 and reaction_rates for
    vars k6 and k6;
    vars kd6 and kd6;
  enddef;
  def map between v104 and reaction_rates for
    vars k6 and k6;
    vars kd6 and kd6;
  enddef;
  def map between v105 and reaction_rates for
    vars k6 and k6;
    vars kd6 and kd6;
  enddef;
  def map between v106 and reaction_rates for
    vars k4 and k4;
    vars kd4 and kd4;
  enddef;
  def map between v107 and reaction_rates for
    vars k5 and k5;
  enddef;
  def map between v108 and reaction_rates for
    vars k6 and k6;
    vars kd6 and kd6;
  enddef;
  def map between v109 and reaction_rates for
    vars k4 and k4;
    vars kd4 and kd4;
  enddef;
  def map between v110 and reaction_rates for
    vars k5 and k5;
  enddef;
  def map between v111 and reaction_rates for
    vars k6 and k6;
    vars kd6 and kd6;
  enddef;
  def map between v112 and reaction_rates for
    vars k4 and k4;
    vars kd4 and kd4;
  enddef;
  def map between v113 and reaction_rates for
    vars k5 and k5;
  enddef;
  def map between v114 and reaction_rates for
    vars k6 and k6;
    vars kd6 and kd6;
  enddef;
  def map between v115 and reaction_rates for
    vars k4 and k4;
    vars kd4 and kd4;
  enddef;
  def map between v116 and reaction_rates for
    vars k5 and k5;
  enddef;
  def map between v117 and reaction_rates for
    vars k6 and k6;
    vars kd6 and kd6;
  enddef;
  def map between v118 and reaction_rates for
    vars k4 and k4;
    vars kd4 and kd4;
  enddef;
  def map between v119 and reaction_rates for
    vars k5 and k5;
  enddef;
  def map between v120 and reaction_rates for
    vars k6 and k6;
    vars kd6 and kd6;
  enddef;
  def map between v121 and reaction_rates for
    vars k4 and k4;
    vars kd4 and kd4;
  enddef;
  def map between v122 and reaction_rates for
    vars k5 and k5;
  enddef;
  def map between v123 and reaction_rates for
    vars k6 and k6;
    vars kd6 and kd6;
  enddef;
  def map between v124 and reaction_rates for
    vars k4 and k4;
    vars kd4 and kd4;
  enddef;
  def map between v125 and reaction_rates for
    vars k5 and k5;
  enddef;
enddef;
