//   FILE :  asthagiri_model_2001.xml
//
// CREATED :  25th October 2001
//
// LAST MODIFIED : 27th December 2007
//
// AUTHOR :  Catherine Lloyd
//           Department of Engineering Science
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification .
//
// DESCRIPTION :  This file contains a CellML description of a study by Asthagiri
// and Lauffenburger (2001) of the feedback effects on signal dynamics in the
// mitogen-activated protein kinase (MAPK) cascade.
//
// CHANGES:
//   22/01/2002 - AAC - Updated metadata to conform to the 16/1/02 CellML Metadata
//                      1.0 Specification.
//   25/02/2002 - CML - Altered connections after checking the model with the
//                      validator.
//   18/07/2002 - CML - Added more metadata.
//   27/08/2002 - AAC - Corrected the initial value of variable 'k6_' in component
//                      'adaptor_heterodimer_syn'.
//   09/04/2003 - AAC - Added publication date information.
//   26/04/2005 - PJV - Changed unit dimensions to make them consistent
// publisher: The University of Auckland, Bioengineering Research Group
// comment: FN Catherine Lloyd; This model has been recoded in CellML without the use of the reaction element. The parameters and differential equations described in the original publication were used. This CellML model is known to read in both COR and PCEnv although currently it is unable to recreate the published results from the original model.
// created: W3CDTF 2001-10-25T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Research Group; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2009-04-30T16:16:27+12:00; Updated curation status; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2003-04-09; Added publication date information.; Given Autumn; Family Cuellar; Other A
// modification: W3CDTF 2002-08-27; Corrected the initial value of variable 'k6_' in component 'adaptor_heterodimer_syn'.; Given Autumn; Family Cuellar; Other A.
// modification: W3CDTF 2007-12-27; Completely re-wrote the model to remove the reaction element.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2005-04-26; Changed unit dimensions E1_ to make them consistent.; Given Peter; Family Villiger; Other J
// modification: W3CDTF 2002-02-25; Altered connections after chacking the model with the validator.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2007-12-31T11:25:15+13:00; Recoded the model to remove the reaction element.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2002-01-22; Updated metadata to conform to the 16/1/02 CellML Metadata 1.0 Specification.; Given Autumn; Family Cuellar; Other A.
// modification: W3CDTF 2002-07-18; Added more metadata.; Given Catherine; Family Lloyd; Other May
// title: The mitogen-activated protein kinase (MAPK) cascade, 2001
// comment: FN Catherine Lloyd; This is the CellML description of Asthagiri and Lauffenburger's mathematical model of the mitogen-activated protein kinase (MAPK) cascade (2001). They examine MAPK pathway dynamics, especially the role of negative feedback mechanisms in generating signal adaptation.
// reference: Pubmed_id 11312698; Given Anand; Family Asthagiri; Other R; Given Douglas; Family Lauffenburger; Other A; title A Compuational Study of Feedback Effects on Signal Dynamics in a Mitogen-Activated Protein Kinase (MAPK) Pathway Model; volume 17; first_page 227; title Biotechnology Progress; W3CDTF 2001-03; last_page 239
// reference: subject_type keyword; signal transduction; MAPK; kinase; pathway; cascade
def model asthagiri_model_2001 as
  // Feedback Effects On Signal Dynamics In A Mitogen-Activated Protein Kinase (MAPK) Cascade
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This model has been recoded in CellML without the use of the reaction element. The parameters and differential equations described in the original publication were used. This CellML model is known to read in both COR and PCEnv although currently it is unable to recreate the published results from the original model.
  //
  // ValidateCellML detects widespread unit inconsistency within this model.
  //
  // Model Structure
  //
  // In 2001, Anand Asthagiri and Douglas Lauffenburger published a mathematical model which examined the mechanisms that govern MAPK pathway dynamics (see the figure below). Their model builds upon the MAPK cascade model of Chi-Ying Huang and James Ferrell (1996). This earlier model focused on the steady-state effects of signaling, whereas more recently, it has been discovered that a signal's information content partly resides in its dynamics.
  //
  // In their model, Anand Asthagiri and Douglas Lauffenburger concentrate on the role of negative feedback mechanisms in the generation of signal adaptation - a term referring to the reset of a signal to prestimulation levels. They assess how different modes of feedback affect the properties of MAPK signalling dynamics.
  //
  // The complete original paper reference is cited below:
  //
  // A Computational Study of Feedback Effects on Signal Dynamics in a Mitogen-Activated Protein Kinase (MAPK) Pathway Model (http://pubs.acs.org/cgi-bin/abstract.cgi/bipret/2001/17/i02/abs/bp010009k.html), Anand R. Asthagiri and Douglas A. Lauffenburger, 2001, Biotechnol. Prog (http://pubs.acs.org/journals/bipret/index.html), 17, 227-239. (Full text (http://pubs.acs.org/cgi-bin/article.cgi/bipret/2001/17/i02/html/bp010009k.html) and PDF versions are available to subscribers on the ACS Publications website. PubMed ID: 11312698 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=11312698&dopt=Abstract)
  //
  // the conventional rendering of the MAPK cascade with feedback effects
  //
  // A rendering of the MAPK cascade with feedback effects. Species are represented by rounded rectangles, and reactions by arrows. The action of a catalyst on a reaction is represented by dashed lines.
  //
  // In CellML, models are thought of as connected networks of discrete components. These components may correspond to physiologically separated regions or chemically distinct objects, or may be useful modelling abstractions. This model has 71 components representing chemically distinct objects (41 chemical species and 30 reactions) and one component defined for modelling convenience which stores the universal variable time. Because this model has so many components, its CellML rendering would be complex. For an example of a CellML rendering of a reaction pathway see The Bhalla Iyengar EGF Pathway Model, 1999.
  // Below, we define some additional units for association with variables and
  // constants within the model. The identifiers are fairly self-explanatory.
  def unit minute as
    unit second {mult: 60.0};
  enddef;
  def unit number as base unit;
  def unit cell as base unit;
  def unit number_per_cell as
    unit number;
    unit cell {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit molar {expo: -1};
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  def comp c as
    var c: molar {pub: out, init: 0.0};
    var c2: molar {pub: in};
    var L0: molar {pub: in};
    var R0: number_per_cell {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kf: second_order_rate_constant {pub: in};
    var ku: first_order_rate_constant {pub: in};
    var kc: second_order_rate_constant {pub: in};
    var r: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(c, time) = L0/(kr/kf)*r+2.0{dimensionless}*(ku/kr)*c2-(c+2.0{dimensionless}*(R0/(kr/kc))*sqr(c));
  enddef;

  def comp c2 as
    var c2: molar {pub: out, init: 0.0};
    var c: molar {pub: in};
    var c_star: molar {pub: in};
    var R0: number_per_cell {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kc_plus: first_order_rate_constant {pub: in};
    var kc_minus: first_order_rate_constant {pub: in};
    var kf: second_order_rate_constant {pub: in};
    var ku: first_order_rate_constant {pub: in};
    var kc: second_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(c2, time) = R0/(kr/kc)*sqr(c)+kc_minus/kr*c_star-(ku/kr*c+kc_plus/kr*c2);
  enddef;

  def comp c_star as
    var c_star: molar {pub: out, init: 0.0};
    var c2: molar {pub: in};
    var a1: molar {pub: in};
    var e0_star: molar {pub: in};
    var c_star_a1: molar {pub: in};
    var a1a2: molar {pub: in};
    var R0: number_per_cell {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kr_1: first_order_rate_constant {pub: in};
    var kf_1: second_order_rate_constant {pub: in};
    var kc_plus: first_order_rate_constant {pub: in};
    var kc_minus: first_order_rate_constant {pub: in};
    var kr_12: first_order_rate_constant {pub: in};
    var kf_12: second_order_rate_constant {pub: in};
    var A1_T: number_per_cell {pub: in};
    var A2_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(c_star, time) = kc_plus/kr*c2+kr_1/kr*(A1_T/R0)*c_star_a1+kr_12/kr*(A2_T/R0)*e0_star-(kc_minus/kr*c_star+kf_1*A1_T/kr*c_star*a1+kf_12*A1_T/kr*c_star*a1a2);
  enddef;

  def comp c_star_a1 as
    var c_star_a1: molar {pub: out, init: 0.0};
    var c_star: molar {pub: in};
    var a1: molar {pub: in};
    var e0_star: molar {pub: in};
    var a2: molar {pub: in};
    var e0_star_e4_star: molar {pub: in};
    var R0: number_per_cell {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kr_1: first_order_rate_constant {pub: in};
    var kf_1: second_order_rate_constant {pub: in};
    var kr_2: first_order_rate_constant {pub: in};
    var kf_2: second_order_rate_constant {pub: in};
    var kc_plus: first_order_rate_constant {pub: in};
    var kc_minus: first_order_rate_constant {pub: in};
    var kcat_x: first_order_rate_constant {pub: in};
    var A1_T: number_per_cell {pub: in};
    var A2_T: number_per_cell {pub: in};
    var E4_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(c_star_a1, time) = kf_1*R0/kr*c_star*a1+kr_2/kr*(A2_T/A1_T)*e0_star+kcat_x/kr*(E4_T/A1_T)*e0_star_e4_star-(kr_1/kr*c_star_a1+kf_2*A2_T/kr*c_star_a1*a2);
  enddef;

  def comp e0_star as
    var e0_star: molar {pub: out, init: 0.0};
    var c_star_a1: molar {pub: in};
    var a2: molar {pub: in};
    var e1: molar {pub: in};
    var e4_star: molar {pub: in};
    var e1_e0_star: molar {pub: in};
    var c_star: molar {pub: in};
    var a1a2: molar {pub: in};
    var e0_star_e4_star: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kr_12: first_order_rate_constant {pub: in};
    var kf_12: second_order_rate_constant {pub: in};
    var kr_2: first_order_rate_constant {pub: in};
    var kf_2: second_order_rate_constant {pub: in};
    var k1_plus: second_order_rate_constant {pub: in};
    var k1_minus: first_order_rate_constant {pub: in};
    var kx_plus: second_order_rate_constant {pub: in};
    var kx_minus: first_order_rate_constant {pub: in};
    var kcat_1: first_order_rate_constant {pub: in};
    var A1_T: number_per_cell {pub: in};
    var A2_T: number_per_cell {pub: in};
    var E1_T: number_per_cell {pub: in};
    var E4_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e0_star, time) = kf_2*A1_T/kr*c_star_a1*a2+kf_12*A1_T/kr*c_star*a1a2+(k1_minus+kcat_1)/kr*(E1_T/A2_T)*e1_e0_star+kx_minus/kr*(E4_T/A2_T)*e0_star_e4_star-(kr_2/kr*e0_star+kr_12/kr*e0_star+k1_plus*E1_T/kr*e0_star*e1+kx_plus*E4_T/kr*e0_star*e4_star);
  enddef;

  def comp a1a2 as
    var a1a2: molar {pub: out, init: 0.0};
    var c_star: molar {pub: in};
    var a1: molar {pub: in};
    var a2: molar {pub: in};
    var e0_star: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kr_12: first_order_rate_constant {pub: in};
    var kf_12: second_order_rate_constant {pub: in};
    var kc_12: second_order_rate_constant {pub: in};
    var kd_12: first_order_rate_constant {pub: in};
    var A1_T: number_per_cell {pub: in};
    var A2_T: number_per_cell {pub: in};
    var R0: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(a1a2, time) = kr_12/kr*(A2_T/A1_T)*e0_star+kc_12*A2_T/kr*a1*a2-(kd_12/kr*a1a2+kf_12*R0/kr*c_star*a1a2);
  enddef;

  def comp r as
    var r: number_per_cell {pub: out};
    var c: molar {pub: in};
    var c2: molar {pub: in};
    var c_star: molar {pub: in};
    var c_star_a1: molar {pub: in};
    var e0_star: molar {pub: in};
    var e0_star_e4_star: molar {pub: in};
    var e1_e0_star: molar {pub: in};
    var A1_T: number_per_cell {pub: in};
    var A2_T: number_per_cell {pub: in};
    var E1_T: number_per_cell {pub: in};
    var E4_T: number_per_cell {pub: in};
    var R0: number_per_cell {pub: in};
    r = 1.0{molar}-(c+2.0{dimensionless}*(c2+c_star+A1_T/R0*c_star_a1+A2_T/R0*e0_star+E4_T/R0*e0_star_e4_star+E1_T/R0*e1_e0_star));
  enddef;

  def comp a1 as
    var a1: molar {pub: out};
    var c_star_a1: molar {pub: in};
    var a1a2: molar {pub: in};
    var e0_star: molar {pub: in};
    var e0_star_e4_star: molar {pub: in};
    var e1_e0_star: molar {pub: in};
    var A1_T: number_per_cell {pub: in};
    var A2_T: number_per_cell {pub: in};
    var E1_T: number_per_cell {pub: in};
    var E4_T: number_per_cell {pub: in};
    a1 = 1.0{molar}-(c_star_a1+a1a2+A2_T/A1_T*e0_star+E4_T/A1_T*e0_star_e4_star+E1_T/A1_T*e1_e0_star);
  enddef;

  def comp a2 as
    var a2: molar {pub: out};
    var a2_minus: molar {pub: in};
    var a1a2: molar {pub: in};
    var e0_star: molar {pub: in};
    var e0_star_e4_star: molar {pub: in};
    var e1_e0_star: molar {pub: in};
    var A1_T: number_per_cell {pub: in};
    var A2_T: number_per_cell {pub: in};
    var E1_T: number_per_cell {pub: in};
    var E4_T: number_per_cell {pub: in};
    a2 = 1.0{molar}-(A1_T/A2_T*a1a2+e0_star+E4_T/A2_T*e0_star_e4_star+E1_T/A2_T*e1_e0_star+a2_minus);
  enddef;

  def comp a2_minus as
    var a2_minus: molar {pub: out, init: 0.0};
    var e0_star_e4_star: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kcat_x: first_order_rate_constant {pub: in};
    var E4_T: number_per_cell {pub: in};
    var A2_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(a2_minus, time) = kcat_x/kr*(E4_T/A2_T)*e0_star_e4_star;
  enddef;

  def comp e1_star_p1 as
    var e1_star_p1: molar {pub: out, init: 0.0};
    var e1_star: molar {pub: in};
    var p1: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kP1_plus: second_order_rate_constant {pub: in};
    var kP1_minus: first_order_rate_constant {pub: in};
    var kcat_P1: first_order_rate_constant {pub: in};
    var E1_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e1_star_p1, time) = kP1_plus*E1_T/kr*e1_star*p1-(kP1_minus/kr+kcat_P1/kr)*e1_star_p1;
  enddef;

  def comp e2_star_p2 as
    var e2_star_p2: molar {pub: out, init: 0.0};
    var e2_star: molar {pub: in};
    var p2: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kP2_plus: second_order_rate_constant {pub: in};
    var kP2_minus: first_order_rate_constant {pub: in};
    var kcat_P2: first_order_rate_constant {pub: in};
    var E2_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e2_star_p2, time) = kP2_plus*E2_T/kr*e2_star*p2-(kP2_minus/kr+kcat_P2/kr)*e2_star_p2;
  enddef;

  def comp e3_star_p3 as
    var e3_star_p3: molar {pub: out, init: 0.0};
    var e3_star: molar {pub: in};
    var p3: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kP3_plus: second_order_rate_constant {pub: in};
    var kP3_minus: first_order_rate_constant {pub: in};
    var kcat_P3: first_order_rate_constant {pub: in};
    var E3_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e3_star_p3, time) = kP3_plus*E3_T/kr*e3_star*p3-(kP3_minus/kr+kcat_P3/kr)*e3_star_p3;
  enddef;

  def comp e4_star_p4 as
    var e4_star_p4: molar {pub: out, init: 0.0};
    var e4_star: molar {pub: in};
    var p4: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kP4_plus: second_order_rate_constant {pub: in};
    var kP4_minus: first_order_rate_constant {pub: in};
    var kcat_P4: first_order_rate_constant {pub: in};
    var E4_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e4_star_p4, time) = kP4_plus*E4_T/kr*e4_star*p4-(kP4_minus/kr+kcat_P4/kr)*e4_star_p4;
  enddef;

  def comp e5_star_p5 as
    var e5_star_p5: molar {pub: out, init: 0.0};
    var e5_star: molar {pub: in};
    var p5: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kP5_plus: second_order_rate_constant {pub: in};
    var kP5_minus: first_order_rate_constant {pub: in};
    var kcat_P5: first_order_rate_constant {pub: in};
    var E5_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e5_star_p5, time) = kP5_plus*E5_T/kr*e5_star*p5-(kP5_minus/kr+kcat_P5/kr)*e5_star_p5;
  enddef;

  def comp e1_e0_star as
    var e1_e0_star: molar {pub: out, init: 0.0};
    var e1: molar {pub: in};
    var e0_star: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var k1_plus: second_order_rate_constant {pub: in};
    var k1_minus: first_order_rate_constant {pub: in};
    var kcat_1: first_order_rate_constant {pub: in};
    var A2_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e1_e0_star, time) = k1_plus*A2_T/kr*e1*e0_star-(k1_minus/kr+kcat_1/kr)*e1_e0_star;
  enddef;

  def comp e2_e1_star as
    var e2_e1_star: molar {pub: out, init: 0.0};
    var e2: molar {pub: in};
    var e1_star: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var k2_plus: second_order_rate_constant {pub: in};
    var k2_minus: first_order_rate_constant {pub: in};
    var kcat_2: first_order_rate_constant {pub: in};
    var E1_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e2_e1_star, time) = k2_plus*E1_T/kr*e2*e1_star-(k2_minus/kr+kcat_2/kr)*e2_e1_star;
  enddef;

  def comp e3_e2_star as
    var e3_e2_star: molar {pub: out, init: 0.0};
    var e3: molar {pub: in};
    var e2_star: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var k3_plus: second_order_rate_constant {pub: in};
    var k3_minus: first_order_rate_constant {pub: in};
    var kcat_3: first_order_rate_constant {pub: in};
    var E2_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e3_e2_star, time) = k3_plus*E2_T/kr*e3*e2_star-(k3_minus/kr+kcat_3/kr)*e3_e2_star;
  enddef;

  def comp e4_e3_star as
    var e4_e3_star: molar {pub: out, init: 0.0};
    var e4: molar {pub: in};
    var e3_star: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var k4_plus: second_order_rate_constant {pub: in};
    var k4_minus: first_order_rate_constant {pub: in};
    var kcat_4: first_order_rate_constant {pub: in};
    var E3_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e4_e3_star, time) = k4_plus*E3_T/kr*e4*e3_star-(k4_minus/kr+kcat_4/kr)*e4_e3_star;
  enddef;

  def comp e5_e4_star as
    var e5_e4_star: molar {pub: out, init: 0.0};
    var e5: molar {pub: in};
    var e4_star: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var k5_plus: second_order_rate_constant {pub: in};
    var k5_minus: first_order_rate_constant {pub: in};
    var kcat_5: first_order_rate_constant {pub: in};
    var E4_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e5_e4_star, time) = k5_plus*E4_T/kr*e5*e4_star-(k5_minus/kr+kcat_5/kr)*e5_e4_star;
  enddef;

  def comp e2_star_e4_star as
    var e2_star_e4_star: molar {pub: out, init: 0.0};
    var e2_star: molar {pub: in};
    var e4_star: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kz_plus: second_order_rate_constant {pub: in};
    var kz_minus: first_order_rate_constant {pub: in};
    var k2_plus: second_order_rate_constant {pub: in};
    var k2_minus: first_order_rate_constant {pub: in};
    var kcat_z: first_order_rate_constant {pub: in};
    var E2_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e2_star_e4_star, time) = kz_plus*E2_T/kr*e4_star*e2_star-(kz_minus/kr+kcat_z/kr)*e2_star_e4_star;
  enddef;

  def comp e0_star_e4_star as
    var e0_star_e4_star: molar {pub: out, init: 0.0};
    var e0_star: molar {pub: in};
    var e4_star: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kx_plus: second_order_rate_constant {pub: in};
    var kx_minus: first_order_rate_constant {pub: in};
    var kcat_x: first_order_rate_constant {pub: in};
    var A2_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e0_star_e4_star, time) = kx_plus*A2_T/kr*e4_star*e0_star-(kx_minus/kr+kcat_x/kr)*e0_star_e4_star;
  enddef;

  def comp e2_minus as
    var e2_minus: molar {pub: out, init: 0.0};
    var e2_star_e4_star: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kcat_z: first_order_rate_constant {pub: in};
    var E4_T: number_per_cell {pub: in};
    var E2_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e2_minus, time) = kcat_z/kr*(E4_T/E2_T)*e2_star_e4_star;
  enddef;

  def comp e1_star as
    var e1_star: molar {pub: out, init: 0.0};
    var e1_e0_star: molar {pub: in};
    var e2_e1_star: molar {pub: in};
    var e1_star_p1: molar {pub: in};
    var p1: molar {pub: in};
    var e2: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kcat_1: first_order_rate_constant {pub: in};
    var kcat_2: first_order_rate_constant {pub: in};
    var k2_plus: second_order_rate_constant {pub: in};
    var k2_minus: first_order_rate_constant {pub: in};
    var kP1_plus: second_order_rate_constant {pub: in};
    var kP1_minus: first_order_rate_constant {pub: in};
    var E2_T: number_per_cell {pub: in};
    var P1_T: number_per_cell {pub: in};
    var E1_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e1_star, time) = kcat_1/kr*e1_e0_star+(k2_minus+kcat_2)/kr*(E2_T/E1_T)*e2_e1_star+kP1_minus/kr*(P1_T/E1_T)*e1_star_p1-(k2_plus*E2_T/kr*e1_star*e2+kP1_plus*P1_T/kr*e1_star*p1);
  enddef;

  def comp e3_star as
    var e3_star: molar {pub: out, init: 0.0};
    var e3_e2_star: molar {pub: in};
    var e4_e3_star: molar {pub: in};
    var e3_star_p3: molar {pub: in};
    var p3: molar {pub: in};
    var e4: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kcat_3: first_order_rate_constant {pub: in};
    var kcat_4: first_order_rate_constant {pub: in};
    var k4_plus: second_order_rate_constant {pub: in};
    var k4_minus: first_order_rate_constant {pub: in};
    var kP3_plus: second_order_rate_constant {pub: in};
    var kP3_minus: first_order_rate_constant {pub: in};
    var E4_T: number_per_cell {pub: in};
    var P3_T: number_per_cell {pub: in};
    var E3_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e3_star, time) = kcat_3/kr*e3_e2_star+(k4_minus+kcat_4)/kr*(E4_T/E3_T)*e4_e3_star+kP3_minus/kr*(P3_T/E3_T)*e3_star_p3-(k4_plus*E4_T/kr*e3_star*e4+kP3_plus*P3_T/kr*e3_star*p3);
  enddef;

  def comp e5_star as
    var e5_star: molar {pub: out, init: 0.0};
    var e5_e4_star: molar {pub: in};
    var e5_star_p5: molar {pub: in};
    var p5: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kcat_5: first_order_rate_constant {pub: in};
    var kP5_plus: second_order_rate_constant {pub: in};
    var kP5_minus: first_order_rate_constant {pub: in};
    var P5_T: number_per_cell {pub: in};
    var E5_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e5_star, time) = kcat_5/kr*e5_e4_star+kP5_minus/kr*(P5_T/E5_T)*e5_star_p5-kP5_plus*P5_T/kr*e5_star*p5;
  enddef;

  def comp e2_star as
    var e2_star: molar {pub: out, init: 0.0};
    var e2_e1_star: molar {pub: in};
    var e3_e2_star: molar {pub: in};
    var e2_star_p2: molar {pub: in};
    var e4_star: molar {pub: in};
    var e2_star_e4_star: molar {pub: in};
    var p2: molar {pub: in};
    var e3: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kcat_2: first_order_rate_constant {pub: in};
    var kcat_3: first_order_rate_constant {pub: in};
    var k3_plus: second_order_rate_constant {pub: in};
    var k3_minus: first_order_rate_constant {pub: in};
    var kz_plus: second_order_rate_constant {pub: in};
    var kz_minus: first_order_rate_constant {pub: in};
    var kP2_plus: second_order_rate_constant {pub: in};
    var kP2_minus: first_order_rate_constant {pub: in};
    var E2_T: number_per_cell {pub: in};
    var P2_T: number_per_cell {pub: in};
    var E3_T: number_per_cell {pub: in};
    var E4_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e2_star, time) = kcat_2/kr*e2_e1_star+(k3_minus+kcat_3)/kr*(E3_T/E2_T)*e3_e2_star+kP2_minus/kr*(P2_T/E2_T)*e2_star_p2+kz_minus/kr*(E4_T/E2_T)*e2_star_e4_star-(k3_plus*E3_T/kr*e2_star*e3+kP2_plus*P2_T/kr*e2_star*p2+kz_plus*E4_T/kr*e2_star*e4_star);
  enddef;

  def comp e4_star as
    var e4_star: molar {pub: out, init: 0.0};
    var e4_e3_star: molar {pub: in};
    var e5_e4_star: molar {pub: in};
    var e4_star_p4: molar {pub: in};
    var e2_star: molar {pub: in};
    var e2_star_e4_star: molar {pub: in};
    var e0_star: molar {pub: in};
    var e0_star_e4_star: molar {pub: in};
    var p4: molar {pub: in};
    var e5: molar {pub: in};
    var kr: first_order_rate_constant {pub: in};
    var kcat_4: first_order_rate_constant {pub: in};
    var kcat_5: first_order_rate_constant {pub: in};
    var kcat_x: first_order_rate_constant {pub: in};
    var kcat_z: first_order_rate_constant {pub: in};
    var k5_plus: second_order_rate_constant {pub: in};
    var k5_minus: first_order_rate_constant {pub: in};
    var kz_plus: second_order_rate_constant {pub: in};
    var kz_minus: first_order_rate_constant {pub: in};
    var kx_plus: second_order_rate_constant {pub: in};
    var kx_minus: first_order_rate_constant {pub: in};
    var kP4_plus: second_order_rate_constant {pub: in};
    var kP4_minus: first_order_rate_constant {pub: in};
    var A2_T: number_per_cell {pub: in};
    var E2_T: number_per_cell {pub: in};
    var P4_T: number_per_cell {pub: in};
    var E5_T: number_per_cell {pub: in};
    var E4_T: number_per_cell {pub: in};
    var time: minute {pub: in};
    ode(e4_star, time) = kcat_4/kr*e4_e3_star+(k5_minus+kcat_5)/kr*(E5_T/E4_T)*e5_e4_star+kP4_minus/kr*(P4_T/E4_T)*e4_star_p4+(kx_minus/kr+kcat_x/kr)*e0_star_e4_star+(kz_minus/kr+kcat_z/kr)*e2_star_e4_star-(k5_plus*E5_T/kr*e4_star*e5+kP4_plus*P4_T/kr*e4_star*p4+kx_plus*A2_T/kr*e0_star*e4_star+kz_plus*E2_T/kr*e2_star*e4_star);
  enddef;

  def comp p1 as
    var p1: molar {pub: out, init: 5E3};
    var e1_star_p1: molar {pub: in};
    p1 = 1.0{molar}-e1_star_p1;
  enddef;

  def comp p2 as
    var p2: molar {pub: out, init: 5E3};
    var e2_star_p2: molar {pub: in};
    p2 = 1.0{molar}-e2_star_p2;
  enddef;

  def comp p3 as
    var p3: molar {pub: out, init: 5E3};
    var e3_star_p3: molar {pub: in};
    p3 = 1.0{molar}-e3_star_p3;
  enddef;

  def comp p4 as
    var p4: molar {pub: out, init: 5E3};
    var e4_star_p4: molar {pub: in};
    p4 = 1.0{molar}-e4_star_p4;
  enddef;

  def comp p5 as
    var p5: molar {pub: out, init: 5E3};
    var e5_star_p5: molar {pub: in};
    p5 = 1.0{molar}-e5_star_p5;
  enddef;

  def comp e1 as
    var e1: molar {pub: out};
    var e1_e0_star: molar {pub: in};
    var e1_star: molar {pub: in};
    var e2_e1_star: molar {pub: in};
    var e1_star_p1: molar {pub: in};
    var E1_T: number_per_cell {pub: in};
    var E2_T: number_per_cell {pub: in};
    var P1_T: number_per_cell {pub: in};
    e1 = 1.0{molar}-(e1_e0_star+e1_star+E2_T/E1_T*e2_e1_star+P1_T/E1_T*e1_star_p1);
  enddef;

  def comp e3 as
    var e3: molar {pub: out};
    var e3_e2_star: molar {pub: in};
    var e3_star: molar {pub: in};
    var e4_e3_star: molar {pub: in};
    var e3_star_p3: molar {pub: in};
    var E3_T: number_per_cell {pub: in};
    var E4_T: number_per_cell {pub: in};
    var P3_T: number_per_cell {pub: in};
    e3 = 1.0{molar}-(e3_e2_star+e3_star+E4_T/E3_T*e4_e3_star+P3_T/E3_T*e3_star_p3);
  enddef;

  def comp e5 as
    var e5: molar {pub: out};
    var e5_e4_star: molar {pub: in};
    var e5_star: molar {pub: in};
    var e5_star_p5: molar {pub: in};
    var E5_T: number_per_cell {pub: in};
    var P5_T: number_per_cell {pub: in};
    e5 = 1.0{molar}-(e5_e4_star+e5_star+P5_T/E5_T*e5_star_p5);
  enddef;

  def comp e2 as
    var e2: molar {pub: out};
    var e2_e1_star: molar {pub: in};
    var e3_star: molar {pub: in};
    var e3_e2_star: molar {pub: in};
    var e2_minus: molar {pub: in};
    var e2_star_p2: molar {pub: in};
    var e2_star_e4_star: molar {pub: in};
    var E2_T: number_per_cell {pub: in};
    var E3_T: number_per_cell {pub: in};
    var E4_T: number_per_cell {pub: in};
    var P2_T: number_per_cell {pub: in};
    e2 = 1.0{molar}-(e3_e2_star+e3_star+E3_T/E2_T*e3_e2_star+E4_T/E2_T*e2_star_e4_star+P2_T/E2_T*e2_star_p2);
  enddef;

  def comp e4 as
    var e4: molar {pub: out};
    var e4_e3_star: molar {pub: in};
    var e4_star: molar {pub: in};
    var e5_e4_star: molar {pub: in};
    var e4_star_p4: molar {pub: in};
    var e2_star_e4_star: molar {pub: in};
    var e0_star_e4_star: molar {pub: in};
    var E4_T: number_per_cell {pub: in};
    var E5_T: number_per_cell {pub: in};
    var P4_T: number_per_cell {pub: in};
    e4 = 1.0{molar}-(e4_e3_star+e4_star+E5_T/E4_T*e5_e4_star+P4_T/E4_T*e4_star_p4+e0_star_e4_star+e2_star_e4_star);
  enddef;

  def comp model_parameters as
    var L0: molar {pub: out};
    var R0: number_per_cell {pub: out, init: 1E5};
    var A1_T: number_per_cell {pub: out, init: 1E4};
    var A2_T: number_per_cell {pub: out, init: 1E4};
    var E1_T: number_per_cell {pub: out, init: 1E4};
    var E2_T: number_per_cell {pub: out, init: 1E4};
    var E3_T: number_per_cell {pub: out, init: 1E4};
    var E4_T: number_per_cell {pub: out, init: 1E4};
    var E5_T: number_per_cell {pub: out, init: 1E4};
    var P1_T: number_per_cell {pub: out, init: 5E3};
    var P2_T: number_per_cell {pub: out, init: 5E3};
    var P3_T: number_per_cell {pub: out, init: 5E3};
    var P4_T: number_per_cell {pub: out, init: 5E3};
    var P5_T: number_per_cell {pub: out, init: 5E3};
    var kf: second_order_rate_constant {pub: out, init: 1E7};
    var kr: first_order_rate_constant {pub: out, init: 0.3};
    var kc: second_order_rate_constant {pub: out, init: 6E7};
    var ku: first_order_rate_constant {pub: out, init: 60.0};
    var kc_plus: first_order_rate_constant {pub: out, init: 50.0};
    var kc_minus: first_order_rate_constant {pub: out, init: 5.0};
    var kf_1: second_order_rate_constant {pub: out, init: 3E8};
    var kf_2: second_order_rate_constant {pub: out, init: 3E8};
    var kf_12: second_order_rate_constant {pub: out, init: 3E8};
    var kc_12: second_order_rate_constant {pub: out, init: 3E8};
    var kr_1: first_order_rate_constant {pub: out};
    var kr_2: first_order_rate_constant {pub: out};
    var kr_12: first_order_rate_constant {pub: out};
    var kd_12: first_order_rate_constant {pub: out};
    var k1_plus: second_order_rate_constant {pub: out, init: 6E8};
    var kP1_plus: second_order_rate_constant {pub: out, init: 6E8};
    var k2_plus: second_order_rate_constant {pub: out, init: 6E8};
    var kP2_plus: second_order_rate_constant {pub: out, init: 6E8};
    var k3_plus: second_order_rate_constant {pub: out, init: 6E8};
    var kP3_plus: second_order_rate_constant {pub: out, init: 6E8};
    var k4_plus: second_order_rate_constant {pub: out, init: 6E8};
    var kP4_plus: second_order_rate_constant {pub: out, init: 6E8};
    var k5_plus: second_order_rate_constant {pub: out, init: 6E8};
    var kP5_plus: second_order_rate_constant {pub: out, init: 6E8};
    var kx_plus: second_order_rate_constant {pub: out, init: 6E8};
    var kz_plus: second_order_rate_constant {pub: out, init: 6E8};
    var k1_minus: first_order_rate_constant {pub: out, init: 30};
    var kP1_minus: first_order_rate_constant {pub: out, init: 30};
    var k2_minus: first_order_rate_constant {pub: out, init: 30};
    var kP2_minus: first_order_rate_constant {pub: out, init: 30};
    var k3_minus: first_order_rate_constant {pub: out, init: 30};
    var kP3_minus: first_order_rate_constant {pub: out, init: 30};
    var k4_minus: first_order_rate_constant {pub: out, init: 30};
    var kP4_minus: first_order_rate_constant {pub: out, init: 30};
    var k5_minus: first_order_rate_constant {pub: out, init: 30};
    var kP5_minus: first_order_rate_constant {pub: out, init: 30};
    var kx_minus: first_order_rate_constant {pub: out, init: 30};
    var kz_minus: first_order_rate_constant {pub: out, init: 30};
    var kcat_1: first_order_rate_constant {pub: out, init: 6};
    var kcat_2: first_order_rate_constant {pub: out, init: 6};
    var kcat_3: first_order_rate_constant {pub: out, init: 6};
    var kcat_4: first_order_rate_constant {pub: out, init: 6};
    var kcat_5: first_order_rate_constant {pub: out, init: 6};
    var kcat_P1: first_order_rate_constant {pub: out, init: 6};
    var kcat_P2: first_order_rate_constant {pub: out, init: 6};
    var kcat_P3: first_order_rate_constant {pub: out, init: 6};
    var kcat_P4: first_order_rate_constant {pub: out, init: 6};
    var kcat_P5: first_order_rate_constant {pub: out, init: 6};
    var kcat_x: first_order_rate_constant {pub: out, init: 6};
    var kcat_z: first_order_rate_constant {pub: out, init: 6};
    L0 = kr/kf;
    kr_1 = kf_1*1E-7{molar};
    kr_2 = kf_2*1E-7{molar};
    kr_12 = kf_12*1E-7{molar};
    kd_12 = kc_12*1E-7{molar};
  enddef;
  def map between c and environment for
    vars time and time;
  enddef;
  def map between c2 and environment for
    vars time and time;
  enddef;
  def map between c_star and environment for
    vars time and time;
  enddef;
  def map between c_star_a1 and environment for
    vars time and time;
  enddef;
  def map between e0_star and environment for
    vars time and time;
  enddef;
  def map between a1a2 and environment for
    vars time and time;
  enddef;
  def map between a2_minus and environment for
    vars time and time;
  enddef;
  def map between e1_star_p1 and environment for
    vars time and time;
  enddef;
  def map between e2_star_p2 and environment for
    vars time and time;
  enddef;
  def map between e3_star_p3 and environment for
    vars time and time;
  enddef;
  def map between e4_star_p4 and environment for
    vars time and time;
  enddef;
  def map between e5_star_p5 and environment for
    vars time and time;
  enddef;
  def map between e1_e0_star and environment for
    vars time and time;
  enddef;
  def map between e2_e1_star and environment for
    vars time and time;
  enddef;
  def map between e3_e2_star and environment for
    vars time and time;
  enddef;
  def map between e4_e3_star and environment for
    vars time and time;
  enddef;
  def map between e5_e4_star and environment for
    vars time and time;
  enddef;
  def map between e2_star_e4_star and environment for
    vars time and time;
  enddef;
  def map between e0_star_e4_star and environment for
    vars time and time;
  enddef;
  def map between e2_minus and environment for
    vars time and time;
  enddef;
  def map between e1_star and environment for
    vars time and time;
  enddef;
  def map between e2_star and environment for
    vars time and time;
  enddef;
  def map between e3_star and environment for
    vars time and time;
  enddef;
  def map between e4_star and environment for
    vars time and time;
  enddef;
  def map between e5_star and environment for
    vars time and time;
  enddef;
  def map between c and c2 for
    vars c and c;
    vars c2 and c2;
  enddef;
  def map between c and r for
    vars c and c;
    vars r and r;
  enddef;
  def map between c and model_parameters for
    vars L0 and L0;
    vars R0 and R0;
    vars kr and kr;
    vars kf and kf;
    vars ku and ku;
    vars kc and kc;
  enddef;
  def map between c_star and c2 for
    vars c_star and c_star;
    vars c2 and c2;
  enddef;
  def map between c2 and model_parameters for
    vars R0 and R0;
    vars kc_minus and kc_minus;
    vars kc_plus and kc_plus;
    vars kr and kr;
    vars kf and kf;
    vars ku and ku;
    vars kc and kc;
  enddef;
  def map between c_star and a1 for
    vars a1 and a1;
  enddef;
  def map between c_star and e0_star for
    vars c_star and c_star;
    vars e0_star and e0_star;
  enddef;
  def map between c_star and c_star_a1 for
    vars c_star and c_star;
    vars c_star_a1 and c_star_a1;
  enddef;
  def map between c_star and a1a2 for
    vars c_star and c_star;
    vars a1a2 and a1a2;
  enddef;
  def map between c_star and model_parameters for
    vars R0 and R0;
    vars kr and kr;
    vars kr_1 and kr_1;
    vars kf_1 and kf_1;
    vars kc_plus and kc_plus;
    vars kc_minus and kc_minus;
    vars kr_12 and kr_12;
    vars kf_12 and kf_12;
    vars A1_T and A1_T;
    vars A2_T and A2_T;
  enddef;
  def map between c_star_a1 and a1 for
    vars c_star_a1 and c_star_a1;
    vars a1 and a1;
  enddef;
  def map between c_star_a1 and e0_star for
    vars c_star_a1 and c_star_a1;
    vars e0_star and e0_star;
  enddef;
  def map between c_star_a1 and a2 for
    vars a2 and a2;
  enddef;
  def map between c_star_a1 and e0_star_e4_star for
    vars e0_star_e4_star and e0_star_e4_star;
  enddef;
  def map between c_star_a1 and model_parameters for
    vars R0 and R0;
    vars kr and kr;
    vars kr_1 and kr_1;
    vars kf_1 and kf_1;
    vars kr_2 and kr_2;
    vars kf_2 and kf_2;
    vars kc_plus and kc_plus;
    vars kc_minus and kc_minus;
    vars kcat_x and kcat_x;
    vars A1_T and A1_T;
    vars A2_T and A2_T;
    vars E4_T and E4_T;
  enddef;
  def map between e0_star and a2 for
    vars e0_star and e0_star;
    vars a2 and a2;
  enddef;
  def map between e0_star and e1 for
    vars e1 and e1;
  enddef;
  def map between e0_star and e4_star for
    vars e0_star and e0_star;
    vars e4_star and e4_star;
  enddef;
  def map between e0_star and e1_e0_star for
    vars e0_star and e0_star;
    vars e1_e0_star and e1_e0_star;
  enddef;
  def map between e0_star and a1a2 for
    vars e0_star and e0_star;
    vars a1a2 and a1a2;
  enddef;
  def map between e0_star and e0_star_e4_star for
    vars e0_star and e0_star;
    vars e0_star_e4_star and e0_star_e4_star;
  enddef;
  def map between e0_star and model_parameters for
    vars kr and kr;
    vars kr_12 and kr_12;
    vars kf_12 and kf_12;
    vars kr_2 and kr_2;
    vars kf_2 and kf_2;
    vars k1_plus and k1_plus;
    vars k1_minus and k1_minus;
    vars kx_plus and kx_plus;
    vars kx_minus and kx_minus;
    vars kcat_1 and kcat_1;
    vars A1_T and A1_T;
    vars A2_T and A2_T;
    vars E1_T and E1_T;
    vars E4_T and E4_T;
  enddef;
  def map between a1a2 and a1 for
    vars a1a2 and a1a2;
    vars a1 and a1;
  enddef;
  def map between a1a2 and a2 for
    vars a1a2 and a1a2;
    vars a2 and a2;
  enddef;
  def map between a1a2 and model_parameters for
    vars R0 and R0;
    vars kr and kr;
    vars kr_12 and kr_12;
    vars kf_12 and kf_12;
    vars kc_12 and kc_12;
    vars kd_12 and kd_12;
    vars A1_T and A1_T;
    vars A2_T and A2_T;
  enddef;
  def map between r and c2 for
    vars c2 and c2;
  enddef;
  def map between r and c_star for
    vars c_star and c_star;
  enddef;
  def map between r and c_star_a1 for
    vars c_star_a1 and c_star_a1;
  enddef;
  def map between r and e0_star for
    vars e0_star and e0_star;
  enddef;
  def map between r and e0_star_e4_star for
    vars e0_star_e4_star and e0_star_e4_star;
  enddef;
  def map between r and e1_e0_star for
    vars e1_e0_star and e1_e0_star;
  enddef;
  def map between r and model_parameters for
    vars A1_T and A1_T;
    vars A2_T and A2_T;
    vars E1_T and E1_T;
    vars E4_T and E4_T;
    vars R0 and R0;
  enddef;
  def map between a1 and e0_star for
    vars e0_star and e0_star;
  enddef;
  def map between a1 and e0_star_e4_star for
    vars e0_star_e4_star and e0_star_e4_star;
  enddef;
  def map between a1 and e1_e0_star for
    vars e1_e0_star and e1_e0_star;
  enddef;
  def map between a1 and model_parameters for
    vars A1_T and A1_T;
    vars A2_T and A2_T;
    vars E1_T and E1_T;
    vars E4_T and E4_T;
  enddef;
  def map between a2 and a2_minus for
    vars a2_minus and a2_minus;
  enddef;
  def map between a2 and e0_star_e4_star for
    vars e0_star_e4_star and e0_star_e4_star;
  enddef;
  def map between a2 and e1_e0_star for
    vars e1_e0_star and e1_e0_star;
  enddef;
  def map between a2 and model_parameters for
    vars A1_T and A1_T;
    vars A2_T and A2_T;
    vars E1_T and E1_T;
    vars E4_T and E4_T;
  enddef;
  def map between a2_minus and e0_star_e4_star for
    vars e0_star_e4_star and e0_star_e4_star;
  enddef;
  def map between a2_minus and model_parameters for
    vars kcat_x and kcat_x;
    vars A2_T and A2_T;
    vars kr and kr;
    vars E4_T and E4_T;
  enddef;
  def map between e1_star_p1 and e1_star for
    vars e1_star_p1 and e1_star_p1;
    vars e1_star and e1_star;
  enddef;
  def map between e1_star_p1 and p1 for
    vars e1_star_p1 and e1_star_p1;
    vars p1 and p1;
  enddef;
  def map between e1_star_p1 and model_parameters for
    vars kr and kr;
    vars kP1_plus and kP1_plus;
    vars kP1_minus and kP1_minus;
    vars kcat_P1 and kcat_P1;
    vars E1_T and E1_T;
  enddef;
  def map between e2_star_p2 and e2_star for
    vars e2_star_p2 and e2_star_p2;
    vars e2_star and e2_star;
  enddef;
  def map between e2_star_p2 and p2 for
    vars e2_star_p2 and e2_star_p2;
    vars p2 and p2;
  enddef;
  def map between e2_star_p2 and model_parameters for
    vars kr and kr;
    vars kP2_plus and kP2_plus;
    vars kP2_minus and kP2_minus;
    vars kcat_P2 and kcat_P2;
    vars E2_T and E2_T;
  enddef;
  def map between e3_star_p3 and e3_star for
    vars e3_star_p3 and e3_star_p3;
    vars e3_star and e3_star;
  enddef;
  def map between e3_star_p3 and p3 for
    vars e3_star_p3 and e3_star_p3;
    vars p3 and p3;
  enddef;
  def map between e3_star_p3 and model_parameters for
    vars kr and kr;
    vars kP3_plus and kP3_plus;
    vars kP3_minus and kP3_minus;
    vars kcat_P3 and kcat_P3;
    vars E3_T and E3_T;
  enddef;
  def map between e4_star_p4 and e4_star for
    vars e4_star_p4 and e4_star_p4;
    vars e4_star and e4_star;
  enddef;
  def map between e4_star_p4 and p4 for
    vars e4_star_p4 and e4_star_p4;
    vars p4 and p4;
  enddef;
  def map between e4_star_p4 and model_parameters for
    vars kr and kr;
    vars kP4_plus and kP4_plus;
    vars kP4_minus and kP4_minus;
    vars kcat_P4 and kcat_P4;
    vars E4_T and E4_T;
  enddef;
  def map between e5_star_p5 and e5_star for
    vars e5_star_p5 and e5_star_p5;
    vars e5_star and e5_star;
  enddef;
  def map between e5_star_p5 and p5 for
    vars e5_star_p5 and e5_star_p5;
    vars p5 and p5;
  enddef;
  def map between e5_star_p5 and model_parameters for
    vars kr and kr;
    vars kP5_plus and kP5_plus;
    vars kP5_minus and kP5_minus;
    vars kcat_P5 and kcat_P5;
    vars E5_T and E5_T;
  enddef;
  def map between e1_e0_star and e1 for
    vars e1_e0_star and e1_e0_star;
    vars e1 and e1;
  enddef;
  def map between e1_e0_star and model_parameters for
    vars kr and kr;
    vars k1_plus and k1_plus;
    vars k1_minus and k1_minus;
    vars kcat_1 and kcat_1;
    vars A2_T and A2_T;
  enddef;
  def map between e2_e1_star and e2 for
    vars e2_e1_star and e2_e1_star;
    vars e2 and e2;
  enddef;
  def map between e2_e1_star and e1_star for
    vars e2_e1_star and e2_e1_star;
    vars e1_star and e1_star;
  enddef;
  def map between e2_e1_star and model_parameters for
    vars kr and kr;
    vars k2_plus and k2_plus;
    vars k2_minus and k2_minus;
    vars kcat_2 and kcat_2;
    vars E1_T and E1_T;
  enddef;
  def map between e3_e2_star and e3 for
    vars e3_e2_star and e3_e2_star;
    vars e3 and e3;
  enddef;
  def map between e3_e2_star and e2_star for
    vars e3_e2_star and e3_e2_star;
    vars e2_star and e2_star;
  enddef;
  def map between e3_e2_star and model_parameters for
    vars kr and kr;
    vars k3_plus and k3_plus;
    vars k3_minus and k3_minus;
    vars kcat_3 and kcat_3;
    vars E2_T and E2_T;
  enddef;
  def map between e4_e3_star and e4 for
    vars e4_e3_star and e4_e3_star;
    vars e4 and e4;
  enddef;
  def map between e4_e3_star and e3_star for
    vars e4_e3_star and e4_e3_star;
    vars e3_star and e3_star;
  enddef;
  def map between e4_e3_star and model_parameters for
    vars kr and kr;
    vars k4_plus and k4_plus;
    vars k4_minus and k4_minus;
    vars kcat_4 and kcat_4;
    vars E3_T and E3_T;
  enddef;
  def map between e5_e4_star and e5 for
    vars e5_e4_star and e5_e4_star;
    vars e5 and e5;
  enddef;
  def map between e5_e4_star and e4_star for
    vars e5_e4_star and e5_e4_star;
    vars e4_star and e4_star;
  enddef;
  def map between e5_e4_star and model_parameters for
    vars kr and kr;
    vars k5_plus and k5_plus;
    vars k5_minus and k5_minus;
    vars kcat_5 and kcat_5;
    vars E4_T and E4_T;
  enddef;
  def map between e2_star_e4_star and e2_star for
    vars e2_star_e4_star and e2_star_e4_star;
    vars e2_star and e2_star;
  enddef;
  def map between e2_star_e4_star and e4_star for
    vars e2_star_e4_star and e2_star_e4_star;
    vars e4_star and e4_star;
  enddef;
  def map between e2_star_e4_star and model_parameters for
    vars kr and kr;
    vars k2_plus and k2_plus;
    vars k2_minus and k2_minus;
    vars kz_plus and kz_plus;
    vars kz_minus and kz_minus;
    vars kcat_z and kcat_z;
    vars E2_T and E2_T;
  enddef;
  def map between e0_star_e4_star and e4_star for
    vars e0_star_e4_star and e0_star_e4_star;
    vars e4_star and e4_star;
  enddef;
  def map between e0_star_e4_star and model_parameters for
    vars kr and kr;
    vars kx_plus and kx_plus;
    vars kx_minus and kx_minus;
    vars kcat_x and kcat_x;
    vars A2_T and A2_T;
  enddef;
  def map between e2_minus and e2_star_e4_star for
    vars e2_star_e4_star and e2_star_e4_star;
  enddef;
  def map between e2_minus and model_parameters for
    vars kr and kr;
    vars kcat_z and kcat_z;
    vars E4_T and E4_T;
    vars E2_T and E2_T;
  enddef;
  def map between e1_star and e1_e0_star for
    vars e1_e0_star and e1_e0_star;
  enddef;
  def map between e1_star and p1 for
    vars p1 and p1;
  enddef;
  def map between e1_star and e2 for
    vars e2 and e2;
  enddef;
  def map between e1_star and model_parameters for
    vars kr and kr;
    vars kP1_plus and kP1_plus;
    vars kP1_minus and kP1_minus;
    vars k2_plus and k2_plus;
    vars k2_minus and k2_minus;
    vars kcat_1 and kcat_1;
    vars kcat_2 and kcat_2;
    vars E1_T and E1_T;
    vars E2_T and E2_T;
    vars P1_T and P1_T;
  enddef;
  def map between e3_star and e3_e2_star for
    vars e3_e2_star and e3_e2_star;
  enddef;
  def map between e3_star and p3 for
    vars p3 and p3;
  enddef;
  def map between e3_star and e4 for
    vars e4 and e4;
  enddef;
  def map between e3_star and model_parameters for
    vars kr and kr;
    vars kP3_plus and kP3_plus;
    vars kP3_minus and kP3_minus;
    vars k4_plus and k4_plus;
    vars k4_minus and k4_minus;
    vars kcat_3 and kcat_3;
    vars kcat_4 and kcat_4;
    vars E3_T and E3_T;
    vars E4_T and E4_T;
    vars P3_T and P3_T;
  enddef;
  def map between e5_star and e5_e4_star for
    vars e5_e4_star and e5_e4_star;
  enddef;
  def map between e5_star and p5 for
    vars p5 and p5;
  enddef;
  def map between e5_star and model_parameters for
    vars kr and kr;
    vars kP5_plus and kP5_plus;
    vars kP5_minus and kP5_minus;
    vars kcat_5 and kcat_5;
    vars E5_T and E5_T;
    vars P5_T and P5_T;
  enddef;
  def map between e2_star and e2_e1_star for
    vars e2_e1_star and e2_e1_star;
  enddef;
  def map between e2_star and e4_star for
    vars e2_star and e2_star;
    vars e4_star and e4_star;
  enddef;
  def map between e2_star and p2 for
    vars p2 and p2;
  enddef;
  def map between e2_star and e3 for
    vars e3 and e3;
  enddef;
  def map between e2_star and model_parameters for
    vars kr and kr;
    vars kP2_plus and kP2_plus;
    vars kP2_minus and kP2_minus;
    vars k3_plus and k3_plus;
    vars k3_minus and k3_minus;
    vars kz_plus and kz_plus;
    vars kz_minus and kz_minus;
    vars kcat_2 and kcat_2;
    vars kcat_3 and kcat_3;
    vars E2_T and E2_T;
    vars P2_T and P2_T;
    vars E3_T and E3_T;
    vars E4_T and E4_T;
  enddef;
  def map between e4_star and e4_e3_star for
    vars e4_e3_star and e4_e3_star;
  enddef;
  def map between e4_star and p4 for
    vars p4 and p4;
  enddef;
  def map between e4_star and e5 for
    vars e5 and e5;
  enddef;
  def map between e4_star and model_parameters for
    vars kr and kr;
    vars kP4_plus and kP4_plus;
    vars kP4_minus and kP4_minus;
    vars k5_plus and k5_plus;
    vars k5_minus and k5_minus;
    vars kz_plus and kz_plus;
    vars kz_minus and kz_minus;
    vars kx_plus and kx_plus;
    vars kx_minus and kx_minus;
    vars kcat_4 and kcat_4;
    vars kcat_5 and kcat_5;
    vars kcat_x and kcat_x;
    vars kcat_z and kcat_z;
    vars A2_T and A2_T;
    vars E2_T and E2_T;
    vars P4_T and P4_T;
    vars E5_T and E5_T;
    vars E4_T and E4_T;
  enddef;
  def map between e1 and e1_star for
    vars e1_star and e1_star;
  enddef;
  def map between e1 and e2_e1_star for
    vars e2_e1_star and e2_e1_star;
  enddef;
  def map between e1 and e1_star_p1 for
    vars e1_star_p1 and e1_star_p1;
  enddef;
  def map between e1 and model_parameters for
    vars P1_T and P1_T;
    vars E1_T and E1_T;
    vars E2_T and E2_T;
  enddef;
  def map between e3 and e3_star for
    vars e3_star and e3_star;
  enddef;
  def map between e3 and e4_e3_star for
    vars e4_e3_star and e4_e3_star;
  enddef;
  def map between e3 and e3_star_p3 for
    vars e3_star_p3 and e3_star_p3;
  enddef;
  def map between e3 and model_parameters for
    vars P3_T and P3_T;
    vars E3_T and E3_T;
    vars E4_T and E4_T;
  enddef;
  def map between e5 and e5_star for
    vars e5_star and e5_star;
  enddef;
  def map between e5 and e5_star_p5 for
    vars e5_star_p5 and e5_star_p5;
  enddef;
  def map between e5 and model_parameters for
    vars P5_T and P5_T;
    vars E5_T and E5_T;
  enddef;
  def map between e2 and e3_star for
    vars e3_star and e3_star;
  enddef;
  def map between e2 and e3_e2_star for
    vars e3_e2_star and e3_e2_star;
  enddef;
  def map between e2 and e2_minus for
    vars e2_minus and e2_minus;
  enddef;
  def map between e2 and e2_star_p2 for
    vars e2_star_p2 and e2_star_p2;
  enddef;
  def map between e2 and e2_star_e4_star for
    vars e2_star_e4_star and e2_star_e4_star;
  enddef;
  def map between e2 and model_parameters for
    vars P2_T and P2_T;
    vars E2_T and E2_T;
    vars E3_T and E3_T;
    vars E4_T and E4_T;
  enddef;
  def map between e4 and e4_star for
    vars e4_star and e4_star;
  enddef;
  def map between e4 and e5_e4_star for
    vars e5_e4_star and e5_e4_star;
  enddef;
  def map between e4 and e4_star_p4 for
    vars e4_star_p4 and e4_star_p4;
  enddef;
  def map between e4 and e2_star_e4_star for
    vars e2_star_e4_star and e2_star_e4_star;
  enddef;
  def map between e4 and e0_star_e4_star for
    vars e0_star_e4_star and e0_star_e4_star;
  enddef;
  def map between e4 and model_parameters for
    vars P4_T and P4_T;
    vars E4_T and E4_T;
    vars E5_T and E5_T;
  enddef;
enddef;
// /a1a2
// alternative: adaptor heterodimer
// title: a1a2
// /c_star_a1
// alternative: active receptor-ligand dimer:adaptor 1 complex
// title: c_star_a1
// /e5_star
// alternative: activated signalling enzyme 5
// title: e5_star
// /e1_star_p1
// alternative: transition complex between an active substate and its deactivating enzyme (1)
// title: e1_star_p1
// /e1
// alternative: inactive signalling enzyme 1
// title: e1
// /e2
// alternative: inactive signalling enzyme 2
// title: e2
// /e3
// alternative: inactive signalling enzyme 3
// title: e3
// /e4
// alternative: inactive signalling enzyme 4
// title: e4
// /e5
// alternative: inactive signalling enzyme 5
// title: e5
// /e0_star
// alternative: receptor-ligand dimer:adaptors 1 and 2 complex
// title: e0_star
// /e2_minus
// alternative: nonfunctional second enzyme
// title: e2_minus
// /e3_e2_star
// alternative: transition complex between an inactive substate and its activator (3)
// title: e3_e2_star
// /e2_e1_star
// alternative: transition complex between an inactive substate and its activator (2)
// title: e2_e1_star
// /e4_e3_star
// alternative: transition complex between an inactive substate and its activator (4)
// title: e4_e3_star
// /e0_star_e4_star
// alternative: transition complex in feedback mediated by enzyme E4*
// title: e0_star_e4_star
// /e3_star
// alternative: activated signalling enzyme 3
// title: e3_star
// /e5_e4_star
// alternative: transition complex between an inactive substate and its activator (5)
// title: e5_e4_star
// /c2
// alternative: ligand-bound and dimerised receptor
// title: c2
// /e2_star
// alternative: activated signalling enzyme 2
// title: e2_star
// /e1_e0_star
// alternative: transition complex between an inactive substate and its activator (1)
// title: e1_e0_star
// /e2_star_p2
// alternative: transition complex between an active substate and its deactivating enzyme (2)
// title: e2_star_p2
// /p3
// alternative: deactivating enzyme 3
// title: p3
// /p2
// alternative: deactivating enzyme 2
// title: p2
// /p1
// alternative: deactivating enzyme 1
// title: p1
// /p5
// alternative: deactivating enzyme 5
// title: p5
// /p4
// alternative: deactivating enzyme 4
// title: p4
// /e4_star
// alternative: activated signalling enzyme 4
// title: e4_star
// /c
// alternative: ligand-bound receptor
// title: c
// /c_star
// alternative: dimerised and activated receptor
// title: c_star
// /r
// alternative: free receptor
// title: r
// /e3_star_p3
// alternative: transition complex between an active substate and its deactivating enzyme (3)
// title: e3_star_p3
// /a1
// alternative: free first adaptor
// title: a1
// /a2
// alternative: free second adaptor
// title: a2
// /e2_star_e4_star
// alternative: transition complex in feedback mediated by enzyme E4*
// title: e2_star_e4_star
// /a2_minus
// alternative: nonfunctional second adaptor
// title: a2_minus
// /e4_star_p4
// alternative: transition complex between an active substate and its deactivating enzyme (4)
// alternative: transition complex between an active substate and its deactivating enzyme (5)
// title: e4_star_p4
// title: e5_star_p5
// /e1_star
// alternative: activated signalling enzyme 1
// title: e1_star
