//
// This CellML file was generated on 21/08/2009 at 9:19:39 at a.m. using:
//
// COR (0.9.31.1309)
// Copyright 2002-2009 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// creator: Family Kang; Given Wendy; Orgname The University of Auckland; wkan014@aucklanduni.ac.nz
// created: W3CDTF 2009-09-30
// title: The Bagci et al. 2006 model of bistability in apoptosis: roles of bax, bcl-2, and mitochondrial permeability transition pores
// reference: _1 signal transduction; _2 apoptosis; _3 cerebral aneurysm; subject_type keyword
// reference: title Biophysical Journal; Family Bagci; Given E; Other Z; Family Vodovotz; Given Y; Family Billiar; Given T; Other R; Family Ermentrout; Given G; Other B; Family Bahar; Given I; first_page 1546; W3CDTF 2006-03-01; volume 90; last_page 1559; title Bistability in apoptosis: roles of bax, bcl-2, and mitochondrial permeability transition pores; Pubmed_id 16339882
// simulation: pointDensity 10000; maximumStepSize .1; endingValue 800
// comment: FN Catherine Lloyd; This is the CellML description of Bagci et al.'s mathematical model of bistability in apoptosis: roles of bax, bcl-2, and mitochondrial permeability transition pores
def model bagci_2006 as
  // Model Status
  //
  // This CellML model is able to run in PCEnv and COR to reproduce published results in the original paper. The units in this model have also been checked and curated.
  //
  // Model Structure
  //
  // ABSTRACT: We propose a mathematical model for mitochondria-dependent apoptosis, in which kinetic cooperativity in formation of the apoptosome is a key element ensuring bistability. We examine the role of Bax and Bcl-2 synthesis and degradation rates, as well as the number of mitochondrial permeability transition pores (MPTPs), on the cell response to apoptotic stimuli. Our analysis suggests that cooperative apoptosome formation is a mechanism for inducing bistability, much more robust than that induced by other mechanisms, such as inhibition of caspase-3 by the inhibitor of apoptosis (IAP). Simulations predict a pathological state in which cells will exhibit a monostable cell survival if Bax degradation rate is above a threshold value, or if Bax expression rate is below a threshold value. Otherwise, cell death or survival occur depending on initial caspase-3 levels. We show that high expression rates of Bcl-2 can counteract the effects of Bax. Our simulations also demonstrate a monostable (pathological) apoptotic response if the number of MPTPs exceeds a threshold value. This study supports our contention, based on mathematical modeling, that cooperativity in apoptosome formation is critically important for determining the healthy responses to apoptotic stimuli, and helps define the roles of Bax, Bcl-2, and MPTP vis-a-vis apoptosome formation.
  //
  // The original paper is cited below:
  //
  // Bistability in Apoptosis: Roles of Bax, Bcl-2 and Mitochondrial Permeability Transition Pores. E.Z. Bagci, Y. Vodovotz, T.R. Billiar et al, 2006, Biophysical Journal, 90, 1546-1559. PubMed ID: 16339882 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=16339882&query_hl=1&itool=pubmed_docsum)
  //
  // Diagram of model
  //
  // A schematic diagram of intrinsic apoptotic signalling pathway described by this mathematical model.
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit second {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit second {expo: -1};
    unit micromolar {expo: -1};
  enddef;
  def unit flux as
    unit micromolar;
    unit second {expo: -1};
  enddef;
  def unit rate as
    unit micromolar {expo: -3};
    unit second {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp Casp8 as
    var Casp8: micromolar {init: 0, pub: out};
    var Casp8Bid: micromolar {init: 0, pub: out};
    var Bid: micromolar {pub: in};
    var J_0: flux {pub: out};
    var J_f0: flux {pub: out};
    var J_Casp8: flux;
    var k_f0: first_order_rate_constant {pub: in};
    var k_10: second_order_rate_constant {pub: in};
    var k_00: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_f0 = k_f0*Casp8Bid;
    J_Casp8 = -u*Casp8;
    J_0 = k_10*Casp8*Bid-k_00*Casp8Bid;
    ode(Casp8, time) = -J_0+J_f0+J_Casp8;
    ode(Casp8Bid, time) = J_0-J_f0;
  enddef;

  def comp Apaf_1 as
    var Apaf_1: micromolar {init: 0.004, pub: out};
    var CytcApaf_1: micromolar {pub: in};
    var Cytc: micromolar {pub: in};
    var J_Apaf_1: flux;
    var J_1: flux {pub: out};
    var P_Apaf_1: flux {pub: in};
    var u: first_order_rate_constant {pub: in};
    var k_11: second_order_rate_constant {pub: in};
    var k_01: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_Apaf_1 = P_Apaf_1-u*Apaf_1;
    J_1 = k_11*Cytc*Apaf_1-k_01*CytcApaf_1;
    ode(Apaf_1, time) = -J_1+J_Apaf_1;
  enddef;

  def comp CytcApaf_1 as
    var CytcApaf_1: micromolar {init: 0, pub: out};
    var Apop: micromolar {pub: in};
    var J_1: flux {pub: in};
    var J_1b: flux {pub: out};
    var k_11b: rate {pub: in};
    var k_01b: first_order_rate_constant {pub: in};
    var p: dimensionless {pub: in};
    var time: second {pub: in};
    J_1b = k_11b*pow(CytcApaf_1, p)-k_01b*Apop;
    ode(CytcApaf_1, time) = J_1-7{dimensionless}*J_1b;
  enddef;

  def comp Cytc as
    var Cytc: micromolar {init: 0, pub: out};
    var J_14: flux {pub: in};
    var J_1: flux {pub: in};
    var J_Cytc: flux;
    var u: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_Cytc = -u*Cytc;
    ode(Cytc, time) = J_14-J_1+J_Cytc;
  enddef;

  def comp Cytc_mito as
    var Cytc_mito: micromolar {init: 0.004, pub: out};
    var Bax_2: micromolar {pub: in};
    var J_14: flux {pub: out};
    var J_Cytc_mito: flux;
    var P_Cytc_mito: flux {pub: in};
    var k14: second_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_Cytc_mito = P_Cytc_mito-u*Cytc_mito;
    J_14 = k14*Bax_2*Cytc_mito;
    ode(Cytc_mito, time) = -J_14+J_Cytc_mito;
  enddef;

  def comp Bax_2 as
    var Bax_2: micromolar {init: 0, pub: out};
    var J_12b: flux {pub: in};
    var J_Bax_2: flux;
    var u: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_Bax_2 = -u*Bax_2;
    ode(Bax_2, time) = J_12b+J_Bax_2;
  enddef;

  def comp tBid_mito as
    var tBid_mito: micromolar {init: 0, pub: out};
    var Bax: micromolar {pub: in};
    var J_11: flux {pub: in};
    var J_12a: flux {pub: out};
    var J_tBid_mito: flux;
    var u: first_order_rate_constant {pub: in};
    var k12a: second_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_tBid_mito = -u*tBid_mito;
    J_12a = k12a*tBid_mito*Bax;
    ode(tBid_mito, time) = J_11-J_12a+J_tBid_mito;
  enddef;

  def comp tBid as
    var tBid: micromolar {init: 0, pub: out};
    var J_f0: flux {pub: in};
    var J_f8: flux {pub: in};
    var J_12b: flux {pub: in};
    var J_11: flux {pub: out};
    var J_tBid: flux;
    var u: first_order_rate_constant {pub: in};
    var k11: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_11 = k11*tBid;
    J_tBid = -u*tBid;
    ode(tBid, time) = J_f0+J_f8-J_11+J_12b+J_tBid;
  enddef;

  def comp tBidBax as
    var tBidBax: micromolar {init: 0, pub: out};
    var Bax: micromolar {pub: in};
    var J_12a: flux {pub: in};
    var J_12b: flux {pub: out};
    var J_tBidBax: flux;
    var k12b: second_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_tBidBax = -u*tBidBax;
    J_12b = k12b*tBidBax*Bax;
    ode(tBidBax, time) = J_12a-J_12b+J_tBidBax;
  enddef;

  def comp Bax as
    var Bax: micromolar {init: 0.004, pub: out};
    var Bcl_2: micromolar {pub: in};
    var J_12a: flux {pub: in};
    var J_12b: flux {pub: in};
    var J_13: flux {pub: out};
    var J_Bax: flux;
    var P_Bax: flux;
    var k13: second_order_rate_constant {pub: in};
    var P_oBax: flux {pub: in};
    var p53: micromolar {pub: in};
    var p53_thresh: micromolar {pub: in};
    var u_Bax: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    P_Bax = P_oBax*(1{dimensionless}+pow(p53, 4{dimensionless})/(pow(p53, 4{dimensionless})+pow(p53_thresh, 4{dimensionless})));
    J_Bax = P_Bax-u_Bax*Bax;
    J_13 = k13*Bcl_2*Bax;
    ode(Bax, time) = -J_12a-J_12b-J_13+J_Bax;
  enddef;

  def comp Bcl_2 as
    var Bcl_2: micromolar {init: 0.004, pub: out};
    var Casp3: micromolar {pub: in};
    var Casp3Bcl_2: micromolar {pub: in};
    var J_9: flux {pub: out};
    var J_13: flux {pub: in};
    var J_Bcl_2: flux;
    var k_19: second_order_rate_constant {pub: in};
    var k_09: first_order_rate_constant {pub: in};
    var P_Bcl_2: flux;
    var P_oBcl_2: flux {pub: in};
    var u_Bcl_2: first_order_rate_constant {pub: in};
    var p53_thresh: micromolar {pub: in};
    var p53: micromolar {pub: in};
    var time: second {pub: in};
    P_Bcl_2 = P_oBcl_2*pow(p53_thresh, 4{dimensionless})/(pow(p53, 4{dimensionless})+pow(p53_thresh, 4{dimensionless}));
    J_9 = k_19*Casp3*Bcl_2-k_09*Casp3Bcl_2;
    J_Bcl_2 = P_Bcl_2-u_Bcl_2*Bcl_2;
    ode(Bcl_2, time) = -J_9-J_13+J_Bcl_2;
  enddef;

  def comp Casp3Bcl_2 as
    var Casp3Bcl_2: micromolar {init: 0, pub: out};
    var J_9: flux {pub: in};
    var J_f9: flux {pub: out};
    var k_f9: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_f9 = k_f9*Casp3Bcl_2;
    ode(Casp3Bcl_2, time) = J_9-J_f9;
  enddef;

  def comp Casp3Bid as
    var Casp3Bid: micromolar {init: 0, pub: out};
    var Casp3: micromolar {pub: in};
    var Bid: micromolar {pub: in};
    var J_8: flux {pub: out};
    var J_f8: flux {pub: out};
    var k_18: second_order_rate_constant {pub: in};
    var k_08: first_order_rate_constant {pub: in};
    var k_f8: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_8 = k_18*Casp3*Bid-k_08*Casp3Bid;
    J_f8 = k_f8*Casp3Bid;
    ode(Casp3Bid, time) = J_8-J_f8;
  enddef;

  def comp Bid as
    var Bid: micromolar {init: 0.004, pub: out};
    var J_0: flux {pub: in};
    var J_8: flux {pub: in};
    var J_Bid: flux;
    var P_Bid: flux {pub: in};
    var u: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_Bid = P_Bid-u*Bid;
    ode(Bid, time) = -J_0-J_8+J_Bid;
  enddef;

  def comp Casp3 as
    var Casp3: micromolar {init: 0, pub: out};
    var IAP: micromolar {pub: in};
    var Casp3IAP: micromolar {init: 0, pub: out};
    var J_f6: flux {pub: in};
    var J_f6b: flux {pub: in};
    var J_7: flux {pub: out};
    var J_8: flux {pub: in};
    var J_f8: flux {pub: in};
    var J_9: flux {pub: in};
    var J_f9: flux {pub: in};
    var J_Casp3: flux;
    var u: first_order_rate_constant {pub: in};
    var k_17: second_order_rate_constant {pub: in};
    var k_07: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_Casp3 = -u*Casp3;
    J_7 = k_17*Casp3*IAP-k_07*Casp3IAP;
    ode(Casp3IAP, time) = J_7;
    ode(Casp3, time) = J_f6+J_f6b-J_7-J_8+J_f8-J_9+J_f9+J_Casp3;
  enddef;

  def comp Apop as
    var Apop: micromolar {init: 0, pub: out};
    var J_1b: flux {pub: in};
    var J_2: flux {pub: in};
    var J_4b: flux {pub: in};
    var time: second {pub: in};
    ode(Apop, time) = J_1b-J_2+J_4b;
  enddef;

  def comp Pro9 as
    var Pro9: micromolar {init: 0.004, pub: out};
    var ApopPro9: micromolar {init: 0, pub: out};
    var ApopPro9_2: micromolar {pub: in};
    var Apop: micromolar {pub: in};
    var J_2: flux {pub: out};
    var J_3: flux {pub: out};
    var J_Pro9: flux;
    var k_12: second_order_rate_constant {pub: in};
    var k_02: first_order_rate_constant {pub: in};
    var k_13: second_order_rate_constant {pub: in};
    var k_03: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var P_Pro9: flux {pub: in};
    var time: second {pub: in};
    J_Pro9 = P_Pro9-u*Pro9;
    J_2 = k_12*Apop*Pro9-k_02*ApopPro9;
    J_3 = k_13*ApopPro9*Pro9-k_03*ApopPro9_2;
    ode(Pro9, time) = -J_2-J_3+J_Pro9;
    ode(ApopPro9, time) = J_2-J_3;
  enddef;

  def comp ApopPro9_2 as
    var ApopPro9_2: micromolar {init: 0, pub: out};
    var J_3: flux {pub: in};
    var J_f3: flux {pub: out};
    var k_f3: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_f3 = k_f3*ApopPro9_2;
    ode(ApopPro9_2, time) = J_3-J_f3;
  enddef;

  def comp ApopCasp9_2Pro3 as
    var ApopCasp9_2Pro3: micromolar {init: 0, pub: out};
    var ApopCasp9_2: micromolar {pub: in};
    var Pro3: micromolar {pub: in};
    var J_6b: flux {pub: out};
    var J_f6b: flux {pub: out};
    var k_16b: second_order_rate_constant {pub: in};
    var k_06b: first_order_rate_constant {pub: in};
    var k_f6b: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_6b = k_16b*ApopCasp9_2*Pro3-k_06b*ApopCasp9_2Pro3;
    J_f6b = k_f6b*ApopCasp9_2Pro3;
    ode(ApopCasp9_2Pro3, time) = J_6b-J_f6b;
  enddef;

  def comp Casp9Pro3 as
    var Casp9Pro3: micromolar {init: 0, pub: out};
    var J_6: flux {pub: in};
    var J_f6: flux {pub: out};
    var k_f6: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_f6 = k_f6*Casp9Pro3;
    ode(Casp9Pro3, time) = J_6-J_f6;
  enddef;

  def comp Pro3 as
    var Pro3: micromolar {init: 0.004, pub: out};
    var Casp9: micromolar {pub: in};
    var Casp9Pro3: micromolar {pub: in};
    var J_6: flux {pub: out};
    var J_6b: flux {pub: in};
    var J_Pro3: flux;
    var k_16: second_order_rate_constant {pub: in};
    var k_06: first_order_rate_constant {pub: in};
    var P_Pro3: flux {pub: in};
    var u: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_6 = k_16*Casp9*Pro3-k_06*Casp9Pro3;
    J_Pro3 = P_Pro3-u*Pro3;
    ode(Pro3, time) = -J_6-J_6b+J_Pro3;
  enddef;

  def comp IAP as
    var IAP: micromolar {init: 0.004, pub: out};
    var Casp9IAP: micromolar {init: 0, pub: out};
    var ApopCasp9IAP: micromolar {init: 0, pub: out};
    var ApopCasp9_2IAP: micromolar {init: 0, pub: out};
    var ApopCasp9_2: micromolar {pub: in};
    var Casp9: micromolar {pub: in};
    var ApopCasp9: micromolar {pub: in};
    var J_5: flux {pub: out};
    var J_5b: flux {pub: out};
    var J_5c: flux {pub: out};
    var J_7: flux {pub: in};
    var J_IAP: flux;
    var P_IAP: flux {pub: in};
    var k_15: second_order_rate_constant {pub: in};
    var k_05: first_order_rate_constant {pub: in};
    var k_15b: second_order_rate_constant {pub: in};
    var k_05b: first_order_rate_constant {pub: in};
    var k_15c: second_order_rate_constant {pub: in};
    var k_05c: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_5 = k_15*Casp9*IAP-k_05*Casp9IAP;
    J_5b = k_15b*ApopCasp9*IAP-k_05b*ApopCasp9IAP;
    J_5c = k_15c*ApopCasp9_2*IAP-k_05c*ApopCasp9_2IAP;
    J_IAP = P_IAP-u*IAP;
    ode(Casp9IAP, time) = J_5;
    ode(ApopCasp9IAP, time) = J_5b;
    ode(ApopCasp9_2IAP, time) = J_5c;
    ode(IAP, time) = -J_5-J_5b-J_5c-J_7+J_IAP;
  enddef;

  def comp ApopCasp9 as
    var ApopCasp9: micromolar {init: 0, pub: out};
    var ApopCasp9_2: micromolar {pub: in};
    var Apop: micromolar {pub: in};
    var Casp9: micromolar {pub: in};
    var J_4: flux {pub: out};
    var J_4b: flux {pub: out};
    var J_5b: flux {pub: in};
    var k_14: first_order_rate_constant {pub: in};
    var k_04: second_order_rate_constant {pub: in};
    var k_14b: first_order_rate_constant {pub: in};
    var k_04b: second_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_4 = k_14*ApopCasp9_2-k_04*ApopCasp9*Casp9;
    J_4b = k_14b*ApopCasp9-k_04b*Apop*Casp9;
    ode(ApopCasp9, time) = J_4-J_4b-J_5b;
  enddef;

  def comp Casp9 as
    var Casp9: micromolar {init: 0, pub: out};
    var J_4: flux {pub: in};
    var J_4b: flux {pub: in};
    var J_5: flux {pub: in};
    var J_6: flux {pub: in};
    var J_f6: flux {pub: in};
    var J_Casp9: flux;
    var u: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    J_Casp9 = -u*Casp9;
    ode(Casp9, time) = J_4+J_4b-J_5-J_6+J_f6+J_Casp9;
  enddef;

  def comp ApopCasp9_2 as
    var ApopCasp9_2: micromolar {init: 0, pub: out};
    var J_f3: flux {pub: in};
    var J_4: flux {pub: in};
    var J_5c: flux {pub: in};
    var J_6b: flux {pub: in};
    var J_f6b: flux {pub: in};
    var time: second {pub: in};
    ode(ApopCasp9_2, time) = J_f3-J_4-J_5c-J_6b+J_f6b;
  enddef;

  def comp model_constant as
    var k_10: second_order_rate_constant {init: 10, pub: out};
    var k_f0: first_order_rate_constant {init: 0.1, pub: out};
    var k_01: first_order_rate_constant {init: 0.5, pub: out};
    var k_01b: first_order_rate_constant {init: 0.5, pub: out};
    var k_02: first_order_rate_constant {init: 0.5, pub: out};
    var k_03: first_order_rate_constant {init: 0.5, pub: out};
    var k_14: first_order_rate_constant {init: 5, pub: out};
    var k_14b: first_order_rate_constant {init: 5, pub: out};
    var k_15: second_order_rate_constant {init: 5, pub: out};
    var k_15b: second_order_rate_constant {init: 5, pub: out};
    var k_15c: second_order_rate_constant {init: 5, pub: out};
    var k_16: second_order_rate_constant {init: 10, pub: out};
    var k_f6: first_order_rate_constant {init: 0.001, pub: out};
    var k_06b: first_order_rate_constant {init: 0.5, pub: out};
    var k_17: second_order_rate_constant {init: 5, pub: out};
    var k_18: second_order_rate_constant {init: 10, pub: out};
    var k_f8: first_order_rate_constant {init: 0.1, pub: out};
    var k_09: first_order_rate_constant {init: 0.5, pub: out};
    var k11: first_order_rate_constant {init: 10, pub: out};
    var k12b: second_order_rate_constant {init: 10, pub: out};
    var k14: second_order_rate_constant {init: 10, pub: out};
    var k_00: first_order_rate_constant {init: 0.5, pub: out};
    var k_11: second_order_rate_constant {init: 5, pub: out};
    var k_11b: rate {init: 50000, pub: out};
    var k_12: second_order_rate_constant {init: 10, pub: out};
    var k_13: second_order_rate_constant {init: 10, pub: out};
    var k_f3: first_order_rate_constant {init: 0.1, pub: out};
    var k_04: second_order_rate_constant {init: 0.5, pub: out};
    var k_04b: second_order_rate_constant {init: 0.5, pub: out};
    var k_05: first_order_rate_constant {init: 0.0035, pub: out};
    var k_05b: first_order_rate_constant {init: 0.0035, pub: out};
    var k_05c: first_order_rate_constant {init: 0.0035, pub: out};
    var k_06: first_order_rate_constant {init: 0.5, pub: out};
    var k_16b: second_order_rate_constant {init: 10, pub: out};
    var k_f6b: first_order_rate_constant {init: 0.1, pub: out};
    var k_07: first_order_rate_constant {init: 0.0035, pub: out};
    var k_08: first_order_rate_constant {init: 0.5, pub: out};
    var k_19: second_order_rate_constant {init: 10, pub: out};
    var k_f9: first_order_rate_constant {init: 0.1, pub: out};
    var k12a: second_order_rate_constant {init: 10, pub: out};
    var k13: second_order_rate_constant {init: 10, pub: out};
    var p53_thresh: micromolar {init: 0.004, pub: out};
    var u: first_order_rate_constant {init: 0.006, pub: out};
    var u_Bax: first_order_rate_constant {init: 0.006, pub: out};
    var u_Bcl_2: first_order_rate_constant {init: 0.006, pub: out};
    var P_Apaf_1: flux {init: 0.0003, pub: out};
    var P_IAP: flux {init: 0.00003, pub: out};
    var P_Pro3: flux {init: 0.0003, pub: out};
    var P_Pro9: flux {init: 0.0003, pub: out};
    var P_Bid: flux {init: 0.00003, pub: out};
    var P_oBcl_2: flux {init: 0.00008, pub: out};
    var P_oBax: flux {init: 0.00003, pub: out};
    var P_Cytc_mito: flux {init: 0.0003, pub: out};
    var p53: micromolar {init: 0.0066, pub: out};
    var p: dimensionless {init: 4, pub: out};
  enddef;
  def map between Cytc and Cytc_mito for
    vars J_14 and J_14;
  enddef;
  def map between Cytc_mito and Bax_2 for
    vars Bax_2 and Bax_2;
  enddef;
  def map between Bax_2 and tBidBax for
    vars J_12b and J_12b;
  enddef;
  def map between tBid_mito and Bax for
    vars J_12a and J_12a;
    vars Bax and Bax;
  enddef;
  def map between tBid_mito and tBid for
    vars J_11 and J_11;
  enddef;
  def map between tBid and Casp8 for
    vars J_f0 and J_f0;
  enddef;
  def map between tBid and Casp3Bid for
    vars J_f8 and J_f8;
  enddef;
  def map between tBid and tBidBax for
    vars J_12b and J_12b;
  enddef;
  def map between tBidBax and Bax for
    vars Bax and Bax;
    vars J_12b and J_12b;
  enddef;
  def map between tBidBax and tBid_mito for
    vars J_12a and J_12a;
  enddef;
  def map between Bax and Bcl_2 for
    vars Bcl_2 and Bcl_2;
    vars J_13 and J_13;
  enddef;
  def map between Bcl_2 and Casp3Bcl_2 for
    vars Casp3Bcl_2 and Casp3Bcl_2;
    vars J_9 and J_9;
  enddef;
  def map between Bcl_2 and Casp3 for
    vars Casp3 and Casp3;
    vars J_9 and J_9;
  enddef;
  def map between Casp3Bid and Casp3 for
    vars J_8 and J_8;
    vars J_f8 and J_f8;
    vars Casp3 and Casp3;
  enddef;
  def map between Casp3Bid and Bid for
    vars J_8 and J_8;
    vars Bid and Bid;
  enddef;
  def map between Casp3 and IAP for
    vars IAP and IAP;
    vars J_7 and J_7;
  enddef;
  def map between Casp3 and ApopCasp9_2Pro3 for
    vars J_f6b and J_f6b;
  enddef;
  def map between Casp3 and Casp9Pro3 for
    vars J_f6 and J_f6;
  enddef;
  def map between Casp3 and Casp3Bcl_2 for
    vars J_f9 and J_f9;
  enddef;
  def map between Apop and Pro9 for
    vars Apop and Apop;
    vars J_2 and J_2;
  enddef;
  def map between Apop and ApopCasp9 for
    vars Apop and Apop;
    vars J_4b and J_4b;
  enddef;
  def map between Pro9 and model_constant for
    vars k_12 and k_12;
    vars k_02 and k_02;
    vars k_13 and k_13;
    vars k_03 and k_03;
    vars u and u;
    vars P_Pro9 and P_Pro9;
  enddef;
  def map between Pro9 and ApopPro9_2 for
    vars ApopPro9_2 and ApopPro9_2;
    vars J_3 and J_3;
  enddef;
  def map between ApopPro9_2 and model_constant for
    vars k_f3 and k_f3;
  enddef;
  def map between ApopCasp9_2Pro3 and ApopCasp9_2 for
    vars ApopCasp9_2 and ApopCasp9_2;
    vars J_6b and J_6b;
    vars J_f6b and J_f6b;
  enddef;
  def map between ApopCasp9_2Pro3 and Pro3 for
    vars Pro3 and Pro3;
    vars J_6b and J_6b;
  enddef;
  def map between ApopCasp9_2Pro3 and model_constant for
    vars k_16b and k_16b;
    vars k_06b and k_06b;
    vars k_f6b and k_f6b;
  enddef;
  def map between Casp9Pro3 and model_constant for
    vars k_f6 and k_f6;
  enddef;
  def map between Casp9Pro3 and Pro3 for
    vars J_6 and J_6;
    vars Casp9Pro3 and Casp9Pro3;
  enddef;
  def map between Pro3 and model_constant for
    vars k_16 and k_16;
    vars k_06 and k_06;
    vars P_Pro3 and P_Pro3;
    vars u and u;
  enddef;
  def map between Pro3 and Casp9 for
    vars Casp9 and Casp9;
    vars J_6 and J_6;
  enddef;
  def map between IAP and ApopCasp9_2 for
    vars ApopCasp9_2 and ApopCasp9_2;
    vars J_5c and J_5c;
  enddef;
  def map between IAP and Casp9 for
    vars Casp9 and Casp9;
    vars J_5 and J_5;
  enddef;
  def map between IAP and ApopCasp9 for
    vars ApopCasp9 and ApopCasp9;
    vars J_5b and J_5b;
  enddef;
  def map between IAP and model_constant for
    vars P_IAP and P_IAP;
    vars k_15 and k_15;
    vars k_05 and k_05;
    vars k_15b and k_15b;
    vars k_05b and k_05b;
    vars k_15c and k_15c;
    vars k_05c and k_05c;
    vars u and u;
  enddef;
  def map between ApopCasp9 and ApopCasp9_2 for
    vars ApopCasp9_2 and ApopCasp9_2;
    vars J_4 and J_4;
  enddef;
  def map between ApopCasp9 and Casp9 for
    vars Casp9 and Casp9;
    vars J_4 and J_4;
    vars J_4b and J_4b;
  enddef;
  def map between ApopCasp9 and model_constant for
    vars k_14 and k_14;
    vars k_04 and k_04;
    vars k_14b and k_14b;
    vars k_04b and k_04b;
  enddef;
  def map between Casp9 and model_constant for
    vars u and u;
  enddef;
  def map between Casp9 and Casp9Pro3 for
    vars J_f6 and J_f6;
  enddef;
  def map between ApopPro9_2 and ApopCasp9_2 for
    vars J_f3 and J_f3;
  enddef;
  def map between Cytc and model_constant for
    vars u and u;
  enddef;
  def map between Cytc_mito and model_constant for
    vars P_Cytc_mito and P_Cytc_mito;
    vars k14 and k14;
    vars u and u;
  enddef;
  def map between Bax_2 and model_constant for
    vars u and u;
  enddef;
  def map between tBid_mito and model_constant for
    vars u and u;
    vars k12a and k12a;
  enddef;
  def map between tBid and model_constant for
    vars u and u;
    vars k11 and k11;
  enddef;
  def map between tBidBax and model_constant for
    vars k12b and k12b;
    vars u and u;
  enddef;
  def map between Bax and model_constant for
    vars k13 and k13;
    vars P_oBax and P_oBax;
    vars u_Bax and u_Bax;
    vars p53 and p53;
    vars p53_thresh and p53_thresh;
  enddef;
  def map between Bcl_2 and model_constant for
    vars k_19 and k_19;
    vars k_09 and k_09;
    vars P_oBcl_2 and P_oBcl_2;
    vars u_Bcl_2 and u_Bcl_2;
    vars p53 and p53;
    vars p53_thresh and p53_thresh;
  enddef;
  def map between Casp3Bcl_2 and model_constant for
    vars k_f9 and k_f9;
  enddef;
  def map between Casp3Bid and model_constant for
    vars k_18 and k_18;
    vars k_08 and k_08;
    vars k_f8 and k_f8;
  enddef;
  def map between Bid and model_constant for
    vars P_Bid and P_Bid;
    vars u and u;
  enddef;
  def map between Casp3 and model_constant for
    vars u and u;
    vars k_17 and k_17;
    vars k_07 and k_07;
  enddef;
  def map between Casp8 and model_constant for
    vars k_f0 and k_f0;
    vars k_10 and k_10;
    vars k_00 and k_00;
    vars u and u;
  enddef;
  def map between Casp8 and Bid for
    vars Bid and Bid;
    vars J_0 and J_0;
  enddef;
  def map between Apaf_1 and model_constant for
    vars u and u;
    vars k_11 and k_11;
    vars k_01 and k_01;
    vars P_Apaf_1 and P_Apaf_1;
  enddef;
  def map between Apaf_1 and CytcApaf_1 for
    vars CytcApaf_1 and CytcApaf_1;
    vars J_1 and J_1;
  enddef;
  def map between Apaf_1 and Cytc for
    vars Cytc and Cytc;
    vars J_1 and J_1;
  enddef;
  def map between CytcApaf_1 and model_constant for
    vars k_11b and k_11b;
    vars k_01b and k_01b;
    vars p and p;
  enddef;
  def map between CytcApaf_1 and Apop for
    vars Apop and Apop;
    vars J_1b and J_1b;
  enddef;
  def map between Casp8 and environment for
    vars time and time;
  enddef;
  def map between Apaf_1 and environment for
    vars time and time;
  enddef;
  def map between CytcApaf_1 and environment for
    vars time and time;
  enddef;
  def map between Cytc and environment for
    vars time and time;
  enddef;
  def map between Cytc_mito and environment for
    vars time and time;
  enddef;
  def map between Bax_2 and environment for
    vars time and time;
  enddef;
  def map between tBid_mito and environment for
    vars time and time;
  enddef;
  def map between tBid and environment for
    vars time and time;
  enddef;
  def map between tBidBax and environment for
    vars time and time;
  enddef;
  def map between Bax and environment for
    vars time and time;
  enddef;
  def map between Bcl_2 and environment for
    vars time and time;
  enddef;
  def map between Casp3Bcl_2 and environment for
    vars time and time;
  enddef;
  def map between Casp3Bid and environment for
    vars time and time;
  enddef;
  def map between Bid and environment for
    vars time and time;
  enddef;
  def map between Casp3 and environment for
    vars time and time;
  enddef;
  def map between Apop and environment for
    vars time and time;
  enddef;
  def map between Pro9 and environment for
    vars time and time;
  enddef;
  def map between ApopPro9_2 and environment for
    vars time and time;
  enddef;
  def map between ApopCasp9_2Pro3 and environment for
    vars time and time;
  enddef;
  def map between Casp9Pro3 and environment for
    vars time and time;
  enddef;
  def map between Pro3 and environment for
    vars time and time;
  enddef;
  def map between IAP and environment for
    vars time and time;
  enddef;
  def map between ApopCasp9 and environment for
    vars time and time;
  enddef;
  def map between Casp9 and environment for
    vars time and time;
  enddef;
  def map between ApopCasp9_2 and environment for
    vars time and time;
  enddef;
enddef;
