<?xml version="1.0"?>
<!--
This CellML file was generated on 3/05/2010 at 11:33:47 at a.m. using:

COR (0.9.31.1371)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="bornheimer_2004" name="bornheimer_2004">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Dynamic rerouting of the carbohydrate flux is key to counteracting oxidative stress</title>
				<author>
					<firstname>Geoffrey</firstname>
					<surname>Nunns</surname>
					<affiliation>
						<shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
				This CellML model runs in COR and OpenCell and the units are consistent throughout. It reproduces the published results and was converted from SBML with the help of Lukas Endler. Validation was done in both CellML and Matlab, Matlab was used to simulate variations in GAP and R concentrations and to reproduce figures 3A and B. 
				 
				</para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: Heterotrimeric G protein signaling is regulated by signaling modules composed of heterotrimeric G proteins, active G protein-coupled receptors (Rs), which activate G proteins, and GTPase-activating proteins (GAPs), which deactivate G proteins. We term these modules GTPase-cycle modules. The local concentrations of these proteins are spatially regulated between plasma membrane microdomains and between the plasma membrane and cytosol, but no data or models are available that quantitatively explain the effect of such regulation on signaling. We present a computational model of the GTPase-cycle module that predicts that the interplay of local G protein, R, and GAP concentrations gives rise to 16 distinct signaling regimes and numerous intermediate signaling phenomena. The regimes suggest alternative modes of the GTPase-cycle module that occur based on defined local concentrations of the component proteins. In one mode, signaling occurs while G protein and receptor are unclustered and GAP eliminates signaling; in another, G protein and receptor are clustered and GAP can rapidly modulate signaling but does not eliminate it. Experimental data from multiple GTPase-cycle modules is interpreted in light of these predictions. The latter mode explains previously paradoxical data in which GAP does not alter maximal current amplitude of G protein-activated ion channels, but hastens signaling. The predictions indicate how variations in local concentrations of the component proteins create GTPase-cycle modules with distinctive phenotypes. They provide a quantitative framework for investigating how regulation of local concentrations of components of the GTPase-cycle module affects signaling.
</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
Computational modeling reveals how interplay between components of a GTPase-cycle module regulates signal transduction, Scott J. Bornheimer, Mano R. Maurya, Marilyn Gist Farquhar, and Shankar Subramaniam, 2004, <emphasis>PNAS</emphasis>, volume 101, 15899-15904.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&amp;cmd=Retrieve&amp;dopt=AbstractPlus&amp;list_uids=15520372&amp;query_hl=1&amp;itool=pubmed_docsum">PubMed ID: 15520372</ulink>
				</para>
				
				<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="bornheimer_2004.png"/>
  </imageobject>
</mediaobject>
<caption>Biochemical reaction scheme of the GTPase cycle.</caption>
</informalfigure>
			</sect1>
		</article>
	</documentation>
	
	   <units name="molar">
      <unit units="mole"/>
      <unit exponent="-1" units="liter"/>
   </units>
   <units name="molar_per_second">
      <unit units="molar"/>
      <unit exponent="-1" units="second"/>
   </units>
   <units name="per_second">
      <unit exponent="-1" units="second"/>
   </units>
   <units name="per_molar_per_second">
      <unit exponent="-1" units="molar"/>
      <unit exponent="-1" units="second"/>
   </units>
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="second"/>
   </component>
   <component name="differentials">
      <variable initial_value="0" name="A" public_interface="out" units="molar"/>
      <variable cmeta:id="differentials_G" initial_value="0" name="G" public_interface="out" units="molar"/>
      <variable cmeta:id="differentials_GA" initial_value="0" name="GA" public_interface="out" units="molar"/>
      <variable initial_value="0.000468" name="T" public_interface="out" units="molar"/>
      <variable initial_value="1e-6" name="R" public_interface="out" units="molar"/>
      <variable cmeta:id="differentials_GT" initial_value="0" name="GT" public_interface="out" units="molar"/>
      <variable cmeta:id="differentials_GD" initial_value="1e-8" name="GD" public_interface="out" units="molar"/>
      <variable initial_value="0.0044" name="Pi_" public_interface="out" units="molar"/>
      <variable initial_value="0.000149" name="D" public_interface="out" units="molar"/>
      <variable cmeta:id="differentials_RG" initial_value="0" name="RG" public_interface="out" units="molar"/>
      <variable cmeta:id="differentials_RGT" initial_value="0" name="RGT" public_interface="out" units="molar"/>
      <variable cmeta:id="differentials_GAT" initial_value="0" name="GAT" public_interface="out" units="molar"/>
      <variable cmeta:id="differentials_GAD" initial_value="0" name="GAD" public_interface="out" units="molar"/>
      <variable cmeta:id="differentials_RGD" initial_value="0" name="RGD" public_interface="out" units="molar"/>
      <variable cmeta:id="differentials_RGA" initial_value="0" name="RGA" public_interface="out" units="molar"/>
      <variable cmeta:id="differentials_RGAT" initial_value="0" name="RGAT" public_interface="out" units="molar"/>
      <variable cmeta:id="differentials_RGAD" initial_value="0" name="RGAD" public_interface="out" units="molar"/>
      <variable name="A1" public_interface="in" units="molar_per_second"/>
      <variable name="A2" public_interface="in" units="molar_per_second"/>
      <variable name="A3" public_interface="in" units="molar_per_second"/>
      <variable name="A4" public_interface="in" units="molar_per_second"/>
      <variable name="A5" public_interface="in" units="molar_per_second"/>
      <variable name="A6" public_interface="in" units="molar_per_second"/>
      <variable name="R1" public_interface="in" units="molar_per_second"/>
      <variable name="R2" public_interface="in" units="molar_per_second"/>
      <variable name="R3" public_interface="in" units="molar_per_second"/>
      <variable name="R4" public_interface="in" units="molar_per_second"/>
      <variable name="R5" public_interface="in" units="molar_per_second"/>
      <variable name="R6" public_interface="in" units="molar_per_second"/>
      <variable name="T1" public_interface="in" units="molar_per_second"/>
      <variable name="T2" public_interface="in" units="molar_per_second"/>
      <variable name="T3" public_interface="in" units="molar_per_second"/>
      <variable name="T4" public_interface="in" units="molar_per_second"/>
      <variable name="P1" public_interface="in" units="molar_per_second"/>
      <variable name="P2" public_interface="in" units="molar_per_second"/>
      <variable name="P3" public_interface="in" units="molar_per_second"/>
      <variable name="P4" public_interface="in" units="molar_per_second"/>
      <variable name="D1" public_interface="in" units="molar_per_second"/>
      <variable name="D2" public_interface="in" units="molar_per_second"/>
      <variable name="D3" public_interface="in" units="molar_per_second"/>
      <variable name="D4" public_interface="in" units="molar_per_second"/>
      <variable name="time" public_interface="in" units="second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>A</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <ci>A1</ci>
                  <ci>A2</ci>
                  <ci>A3</ci>
                  <ci>A4</ci>
                  <ci>A5</ci>
                  <ci>A6</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>G</ci>
            </apply>
            <apply>
               <minus/>
               <ci>D1</ci>
               <apply>
                  <plus/>
                  <ci>A1</ci>
                  <ci>T1</ci>
                  <ci>R1</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>GA</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <ci>A1</ci>
                     <ci>T2</ci>
                  </apply>
                  <ci>D2</ci>
               </apply>
               <ci>R4</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>T</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <ci>T1</ci>
                  <ci>T3</ci>
                  <ci>T2</ci>
                  <ci>T4</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>R</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <ci>R1</ci>
                  <ci>R2</ci>
                  <ci>R3</ci>
                  <ci>R4</ci>
                  <ci>R5</ci>
                  <ci>R6</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>GT</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <ci>T1</ci>
                     <ci>P1</ci>
                  </apply>
                  <ci>R2</ci>
               </apply>
               <ci>A2</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>GD</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <ci>P1</ci>
                     <ci>D1</ci>
                  </apply>
                  <ci>A3</ci>
               </apply>
               <ci>R3</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Pi_</ci>
            </apply>
            <apply>
               <plus/>
               <ci>P1</ci>
               <ci>P3</ci>
               <ci>P2</ci>
               <ci>P4</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>D</ci>
            </apply>
            <apply>
               <plus/>
               <ci>D1</ci>
               <ci>D3</ci>
               <ci>D2</ci>
               <ci>D4</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>RG</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <ci>R1</ci>
                     <ci>T3</ci>
                  </apply>
                  <ci>D3</ci>
               </apply>
               <ci>A4</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>RGT</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>T3</ci>
                     <ci>R2</ci>
                  </apply>
                  <ci>P3</ci>
               </apply>
               <ci>A5</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>GAT</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>A2</ci>
                     <ci>T2</ci>
                  </apply>
                  <ci>P2</ci>
               </apply>
               <ci>R5</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>GAD</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>A3</ci>
                     <ci>P2</ci>
                  </apply>
                  <ci>D2</ci>
               </apply>
               <ci>R6</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>RGD</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>R3</ci>
                     <ci>P3</ci>
                  </apply>
                  <ci>D3</ci>
               </apply>
               <ci>A6</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>RGA</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>A4</ci>
                     <ci>R4</ci>
                  </apply>
                  <ci>T4</ci>
               </apply>
               <ci>D4</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>RGAT</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <ci>T4</ci>
                  <ci>R5</ci>
                  <ci>A5</ci>
               </apply>
               <ci>P4</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>RGAD</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <ci>P4</ci>
                  <ci>A6</ci>
                  <ci>R6</ci>
               </apply>
               <ci>D4</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="output">
      <variable name="Z" units="dimensionless"/>
      <variable name="v" units="per_second"/>
      <variable initial_value="1e-8" name="G_tot" units="molar"/>
      <variable name="GT" public_interface="in" units="molar"/>
      <variable name="RGT" public_interface="in" units="molar"/>
      <variable name="GAT" public_interface="in" units="molar"/>
      <variable name="RGAT" public_interface="in" units="molar"/>
      <variable name="P_minus1" public_interface="in" units="per_second"/>
      <variable name="P_minus2" public_interface="in" units="per_second"/>
      <variable name="P_minus3" public_interface="in" units="per_second"/>
      <variable name="P_minus4" public_interface="in" units="per_second"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>Z</ci>
            <apply>
               <divide/>
               <apply>
                  <plus/>
                  <ci>GT</ci>
                  <ci>RGT</ci>
                  <ci>RGAT</ci>
                  <ci>GAT</ci>
               </apply>
               <ci>G_tot</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v</ci>
            <apply>
               <divide/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>P_minus4</ci>
                     <ci>RGAT</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>P_minus2</ci>
                     <ci>GAT</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>P_minus3</ci>
                     <ci>RGT</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>P_minus1</ci>
                     <ci>GT</ci>
                  </apply>
               </apply>
               <ci>G_tot</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="A1">
      <variable name="A1" public_interface="out" units="molar_per_second"/>
      <variable initial_value="8780000" name="k1" units="per_molar_per_second"/>
      <variable initial_value="8" name="k2" units="per_second"/>
      <variable name="A" public_interface="in" units="molar"/>
      <variable name="G" public_interface="in" units="molar"/>
      <variable name="GA" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>A1</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>G</ci>
                  <ci>A</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>GA</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="T1">
      <variable name="T1" public_interface="out" units="molar_per_second"/>
      <variable initial_value="529000" name="k1" units="per_molar_per_second"/>
      <variable initial_value="8.38e-6" name="k2" units="per_second"/>
      <variable name="G" public_interface="in" units="molar"/>
      <variable name="T" public_interface="in" units="molar"/>
      <variable name="GT" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>T1</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>G</ci>
                  <ci>T</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>GT</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="R1">
      <variable name="R1" public_interface="out" units="molar_per_second"/>
      <variable initial_value="636000000" name="k1" units="per_molar_per_second"/>
      <variable initial_value="0.0179" name="k2" units="per_second"/>
      <variable name="G" public_interface="in" units="molar"/>
      <variable name="R" public_interface="in" units="molar"/>
      <variable name="RG" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>R1</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>G</ci>
                  <ci>R</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>RG</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="P1">
      <variable name="P1" public_interface="out" units="molar_per_second"/>
      <variable initial_value="0.013" name="k1" public_interface="out" units="per_second"/>
      <variable initial_value="9.03e-7" name="k2" units="per_molar_per_second"/>
      <variable name="GT" public_interface="in" units="molar"/>
      <variable name="GD" public_interface="in" units="molar"/>
      <variable name="Pi_" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>P1</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>GT</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>GD</ci>
                  <ci>Pi_</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="D1">
      <variable name="D1" public_interface="out" units="molar_per_second"/>
      <variable initial_value="0.0001" name="k1" units="per_second"/>
      <variable initial_value="62.3" name="k2" units="per_molar_per_second"/>
      <variable name="G" public_interface="in" units="molar"/>
      <variable name="GD" public_interface="in" units="molar"/>
      <variable name="D" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>D1</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>GD</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>G</ci>
                  <ci>D</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="T3">
      <variable name="T3" public_interface="out" units="molar_per_second"/>
      <variable initial_value="853000" name="k1" units="per_molar_per_second"/>
      <variable initial_value="0.00468" name="k2" units="per_second"/>
      <variable name="T" public_interface="in" units="molar"/>
      <variable name="RG" public_interface="in" units="molar"/>
      <variable name="RGT" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>T3</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>RG</ci>
                  <ci>T</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>RGT</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="R2">
      <variable name="R2" public_interface="out" units="molar_per_second"/>
      <variable initial_value="132000000" name="k1" units="per_molar_per_second"/>
      <variable initial_value="1.28" name="k2" units="per_second"/>
      <variable name="R" public_interface="in" units="molar"/>
      <variable name="GT" public_interface="in" units="molar"/>
      <variable name="RGT" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>R2</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>GT</ci>
                  <ci>R</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>RGT</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="A2">
      <variable name="A2" public_interface="out" units="molar_per_second"/>
      <variable initial_value="386000" name="k1" units="per_molar_per_second"/>
      <variable initial_value="0.0408" name="k2" units="per_second"/>
      <variable name="A" public_interface="in" units="molar"/>
      <variable name="GT" public_interface="in" units="molar"/>
      <variable name="GAT" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>A2</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>GT</ci>
                  <ci>A</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>GAT</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="A3">
      <variable name="A3" public_interface="out" units="molar_per_second"/>
      <variable initial_value="64100" name="k1" units="per_molar_per_second"/>
      <variable initial_value="0.95" name="k2" units="per_second"/>
      <variable name="A" public_interface="in" units="molar"/>
      <variable name="GD" public_interface="in" units="molar"/>
      <variable name="GAD" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>A3</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>GD</ci>
                  <ci>A</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>GAD</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="R3">
      <variable name="R3" public_interface="out" units="molar_per_second"/>
      <variable initial_value="94700000" name="k1" units="per_molar_per_second"/>
      <variable initial_value="0.00227" name="k2" units="per_second"/>
      <variable name="R" public_interface="in" units="molar"/>
      <variable name="GD" public_interface="in" units="molar"/>
      <variable name="RGD" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>R3</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>GD</ci>
                  <ci>R</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>RGD</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="P3">
      <variable name="P3" public_interface="out" units="molar_per_second"/>
      <variable initial_value="0.013" name="k1" public_interface="out" units="per_second"/>
      <variable initial_value="2.22e-9" name="k2" units="per_molar_per_second"/>
      <variable name="Pi_" public_interface="in" units="molar"/>
      <variable name="RGT" public_interface="in" units="molar"/>
      <variable name="RGD" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>P3</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>RGT</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>RGD</ci>
                  <ci>Pi_</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="D3">
      <variable name="D3" public_interface="out" units="molar_per_second"/>
      <variable initial_value="2" name="k1" units="per_second"/>
      <variable initial_value="1470000" name="k2" units="per_molar_per_second"/>
      <variable name="D" public_interface="in" units="molar"/>
      <variable name="RG" public_interface="in" units="molar"/>
      <variable name="RGD" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>D3</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>RGD</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>RG</ci>
                  <ci>D</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="T2">
      <variable name="T2" public_interface="out" units="molar_per_second"/>
      <variable initial_value="44700" name="k1" units="per_molar_per_second"/>
      <variable initial_value="8.32e-8" name="k2" units="per_second"/>
      <variable name="GA" public_interface="in" units="molar"/>
      <variable name="T" public_interface="in" units="molar"/>
      <variable name="GAT" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>T2</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>GA</ci>
                  <ci>T</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>GAT</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="P2">
      <variable name="P2" public_interface="out" units="molar_per_second"/>
      <variable initial_value="25" name="k1" public_interface="out" units="per_second"/>
      <variable initial_value="0.244" name="k2" units="per_molar_per_second"/>
      <variable name="Pi_" public_interface="in" units="molar"/>
      <variable name="GAT" public_interface="in" units="molar"/>
      <variable name="GAD" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>P2</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>GAT</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>GAD</ci>
                  <ci>Pi_</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="D2">
      <variable name="D2" public_interface="out" units="molar_per_second"/>
      <variable initial_value="0.0001" name="k1" units="per_second"/>
      <variable initial_value="3.83" name="k2" units="per_molar_per_second"/>
      <variable name="GA" public_interface="in" units="molar"/>
      <variable name="D" public_interface="in" units="molar"/>
      <variable name="GAD" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>D2</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>GAD</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>GA</ci>
                  <ci>D</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="A4">
      <variable name="A4" public_interface="out" units="molar_per_second"/>
      <variable initial_value="74300" name="k1" units="per_molar_per_second"/>
      <variable initial_value="0.00572" name="k2" units="per_second"/>
      <variable name="A" public_interface="in" units="molar"/>
      <variable name="RG" public_interface="in" units="molar"/>
      <variable name="RGA" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>A4</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>RG</ci>
                  <ci>A</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>RGA</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="R4">
      <variable name="R4" public_interface="out" units="molar_per_second"/>
      <variable initial_value="22800000" name="k1" units="per_molar_per_second"/>
      <variable initial_value="5.43e-5" name="k2" units="per_second"/>
      <variable name="GA" public_interface="in" units="molar"/>
      <variable name="R" public_interface="in" units="molar"/>
      <variable name="RGA" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>R4</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>GA</ci>
                  <ci>R</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>RGA</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="T4">
      <variable name="T4" public_interface="out" units="molar_per_second"/>
      <variable initial_value="1620000" name="k1" units="per_molar_per_second"/>
      <variable initial_value="0.00875" name="k2" units="per_second"/>
      <variable name="T" public_interface="in" units="molar"/>
      <variable name="RGA" public_interface="in" units="molar"/>
      <variable name="RGAT" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>T4</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>RGA</ci>
                  <ci>T</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>RGAT</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="R5">
      <variable name="R5" public_interface="out" units="molar_per_second"/>
      <variable initial_value="6200000" name="k1" units="per_molar_per_second"/>
      <variable initial_value="0.0433" name="k2" units="per_second"/>
      <variable name="R" public_interface="in" units="molar"/>
      <variable name="GAT" public_interface="in" units="molar"/>
      <variable name="RGAT" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>R5</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>GAT</ci>
                  <ci>R</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>RGAT</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="A5">
      <variable name="A5" public_interface="out" units="molar_per_second"/>
      <variable initial_value="6300000" name="k1" units="per_molar_per_second"/>
      <variable initial_value="0.478" name="k2" units="per_second"/>
      <variable name="A" public_interface="in" units="molar"/>
      <variable name="RGT" public_interface="in" units="molar"/>
      <variable name="RGAT" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>A5</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>RGT</ci>
                  <ci>A</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>RGAT</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="P4">
      <variable name="P4" public_interface="out" units="molar_per_second"/>
      <variable initial_value="25" name="k1" public_interface="out" units="per_second"/>
      <variable initial_value="0.00297" name="k2" units="per_molar_per_second"/>
      <variable name="Pi_" public_interface="in" units="molar"/>
      <variable name="RGAT" public_interface="in" units="molar"/>
      <variable name="RGAD" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>P4</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>RGAT</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>RGAD</ci>
                  <ci>Pi_</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="A6">
      <variable name="A6" public_interface="out" units="molar_per_second"/>
      <variable initial_value="13000" name="k1" units="per_molar_per_second"/>
      <variable initial_value="0.685" name="k2" units="per_second"/>
      <variable name="A" public_interface="in" units="molar"/>
      <variable name="RGD" public_interface="in" units="molar"/>
      <variable name="RGAD" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>A6</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>RGD</ci>
                  <ci>A</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>RGAD</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="R6">
      <variable name="R6" public_interface="out" units="molar_per_second"/>
      <variable initial_value="49400000" name="k1" units="per_molar_per_second"/>
      <variable initial_value="0.00421" name="k2" units="per_second"/>
      <variable name="R" public_interface="in" units="molar"/>
      <variable name="GAD" public_interface="in" units="molar"/>
      <variable name="RGAD" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>R6</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>GAD</ci>
                  <ci>R</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>RGAD</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="D4">
      <variable name="D4" public_interface="out" units="molar_per_second"/>
      <variable initial_value="2.75" name="k1" units="per_second"/>
      <variable initial_value="2940" name="k2" units="per_molar_per_second"/>
      <variable name="D" public_interface="in" units="molar"/>
      <variable name="RGA" public_interface="in" units="molar"/>
      <variable name="RGAD" public_interface="in" units="molar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>D4</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k1</ci>
                  <ci>RGAD</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k2</ci>
                  <ci>RGA</ci>
                  <ci>D</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="environment" component_2="differentials"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="output" component_2="differentials"/>
      <map_variables variable_1="GT" variable_2="GT"/>
      <map_variables variable_1="RGT" variable_2="RGT"/>
      <map_variables variable_1="GAT" variable_2="GAT"/>
      <map_variables variable_1="RGAT" variable_2="RGAT"/>
   </connection>
   <connection>
      <map_components component_1="output" component_2="P1"/>
      <map_variables variable_1="P_minus1" variable_2="k1"/>
   </connection>
   <connection>
      <map_components component_1="output" component_2="P2"/>
      <map_variables variable_1="P_minus2" variable_2="k1"/>
   </connection>
   <connection>
      <map_components component_1="output" component_2="P3"/>
      <map_variables variable_1="P_minus3" variable_2="k1"/>
   </connection>
   <connection>
      <map_components component_1="output" component_2="P4"/>
      <map_variables variable_1="P_minus4" variable_2="k1"/>
   </connection>
   <connection>
      <map_components component_1="A1" component_2="differentials"/>
      <map_variables variable_1="A1" variable_2="A1"/>
      <map_variables variable_1="A" variable_2="A"/>
      <map_variables variable_1="G" variable_2="G"/>
      <map_variables variable_1="GA" variable_2="GA"/>
   </connection>
   <connection>
      <map_components component_1="T1" component_2="differentials"/>
      <map_variables variable_1="T1" variable_2="T1"/>
      <map_variables variable_1="G" variable_2="G"/>
      <map_variables variable_1="T" variable_2="T"/>
      <map_variables variable_1="GT" variable_2="GT"/>
   </connection>
   <connection>
      <map_components component_1="R1" component_2="differentials"/>
      <map_variables variable_1="R1" variable_2="R1"/>
      <map_variables variable_1="G" variable_2="G"/>
      <map_variables variable_1="R" variable_2="R"/>
      <map_variables variable_1="RG" variable_2="RG"/>
   </connection>
   <connection>
      <map_components component_1="P1" component_2="differentials"/>
      <map_variables variable_1="P1" variable_2="P1"/>
      <map_variables variable_1="GT" variable_2="GT"/>
      <map_variables variable_1="GD" variable_2="GD"/>
      <map_variables variable_1="Pi_" variable_2="Pi_"/>
   </connection>
   <connection>
      <map_components component_1="D1" component_2="differentials"/>
      <map_variables variable_1="D1" variable_2="D1"/>
      <map_variables variable_1="G" variable_2="G"/>
      <map_variables variable_1="GD" variable_2="GD"/>
      <map_variables variable_1="D" variable_2="D"/>
   </connection>
   <connection>
      <map_components component_1="T3" component_2="differentials"/>
      <map_variables variable_1="T3" variable_2="T3"/>
      <map_variables variable_1="T" variable_2="T"/>
      <map_variables variable_1="RG" variable_2="RG"/>
      <map_variables variable_1="RGT" variable_2="RGT"/>
   </connection>
   <connection>
      <map_components component_1="R2" component_2="differentials"/>
      <map_variables variable_1="R2" variable_2="R2"/>
      <map_variables variable_1="R" variable_2="R"/>
      <map_variables variable_1="GT" variable_2="GT"/>
      <map_variables variable_1="RGT" variable_2="RGT"/>
   </connection>
   <connection>
      <map_components component_1="A2" component_2="differentials"/>
      <map_variables variable_1="A2" variable_2="A2"/>
      <map_variables variable_1="A" variable_2="A"/>
      <map_variables variable_1="GT" variable_2="GT"/>
      <map_variables variable_1="GAT" variable_2="GAT"/>
   </connection>
   <connection>
      <map_components component_1="A3" component_2="differentials"/>
      <map_variables variable_1="A3" variable_2="A3"/>
      <map_variables variable_1="A" variable_2="A"/>
      <map_variables variable_1="GD" variable_2="GD"/>
      <map_variables variable_1="GAD" variable_2="GAD"/>
   </connection>
   <connection>
      <map_components component_1="R3" component_2="differentials"/>
      <map_variables variable_1="R3" variable_2="R3"/>
      <map_variables variable_1="R" variable_2="R"/>
      <map_variables variable_1="GD" variable_2="GD"/>
      <map_variables variable_1="RGD" variable_2="RGD"/>
   </connection>
   <connection>
      <map_components component_1="P3" component_2="differentials"/>
      <map_variables variable_1="P3" variable_2="P3"/>
      <map_variables variable_1="Pi_" variable_2="Pi_"/>
      <map_variables variable_1="RGT" variable_2="RGT"/>
      <map_variables variable_1="RGD" variable_2="RGD"/>
   </connection>
   <connection>
      <map_components component_1="D3" component_2="differentials"/>
      <map_variables variable_1="D3" variable_2="D3"/>
      <map_variables variable_1="D" variable_2="D"/>
      <map_variables variable_1="RG" variable_2="RG"/>
      <map_variables variable_1="RGD" variable_2="RGD"/>
   </connection>
   <connection>
      <map_components component_1="T2" component_2="differentials"/>
      <map_variables variable_1="T2" variable_2="T2"/>
      <map_variables variable_1="GA" variable_2="GA"/>
      <map_variables variable_1="T" variable_2="T"/>
      <map_variables variable_1="GAT" variable_2="GAT"/>
   </connection>
   <connection>
      <map_components component_1="P2" component_2="differentials"/>
      <map_variables variable_1="P2" variable_2="P2"/>
      <map_variables variable_1="Pi_" variable_2="Pi_"/>
      <map_variables variable_1="GAT" variable_2="GAT"/>
      <map_variables variable_1="GAD" variable_2="GAD"/>
   </connection>
   <connection>
      <map_components component_1="D2" component_2="differentials"/>
      <map_variables variable_1="D2" variable_2="D2"/>
      <map_variables variable_1="GA" variable_2="GA"/>
      <map_variables variable_1="D" variable_2="D"/>
      <map_variables variable_1="GAD" variable_2="GAD"/>
   </connection>
   <connection>
      <map_components component_1="A4" component_2="differentials"/>
      <map_variables variable_1="A4" variable_2="A4"/>
      <map_variables variable_1="A" variable_2="A"/>
      <map_variables variable_1="RG" variable_2="RG"/>
      <map_variables variable_1="RGA" variable_2="RGA"/>
   </connection>
   <connection>
      <map_components component_1="R4" component_2="differentials"/>
      <map_variables variable_1="R4" variable_2="R4"/>
      <map_variables variable_1="GA" variable_2="GA"/>
      <map_variables variable_1="R" variable_2="R"/>
      <map_variables variable_1="RGA" variable_2="RGA"/>
   </connection>
   <connection>
      <map_components component_1="T4" component_2="differentials"/>
      <map_variables variable_1="T4" variable_2="T4"/>
      <map_variables variable_1="T" variable_2="T"/>
      <map_variables variable_1="RGA" variable_2="RGA"/>
      <map_variables variable_1="RGAT" variable_2="RGAT"/>
   </connection>
   <connection>
      <map_components component_1="R5" component_2="differentials"/>
      <map_variables variable_1="R5" variable_2="R5"/>
      <map_variables variable_1="R" variable_2="R"/>
      <map_variables variable_1="GAT" variable_2="GAT"/>
      <map_variables variable_1="RGAT" variable_2="RGAT"/>
   </connection>
   <connection>
      <map_components component_1="A5" component_2="differentials"/>
      <map_variables variable_1="A5" variable_2="A5"/>
      <map_variables variable_1="A" variable_2="A"/>
      <map_variables variable_1="RGT" variable_2="RGT"/>
      <map_variables variable_1="RGAT" variable_2="RGAT"/>
   </connection>
   <connection>
      <map_components component_1="P4" component_2="differentials"/>
      <map_variables variable_1="P4" variable_2="P4"/>
      <map_variables variable_1="Pi_" variable_2="Pi_"/>
      <map_variables variable_1="RGAT" variable_2="RGAT"/>
      <map_variables variable_1="RGAD" variable_2="RGAD"/>
   </connection>
   <connection>
      <map_components component_1="A6" component_2="differentials"/>
      <map_variables variable_1="A6" variable_2="A6"/>
      <map_variables variable_1="A" variable_2="A"/>
      <map_variables variable_1="RGD" variable_2="RGD"/>
      <map_variables variable_1="RGAD" variable_2="RGAD"/>
   </connection>
   <connection>
      <map_components component_1="R6" component_2="differentials"/>
      <map_variables variable_1="R6" variable_2="R6"/>
      <map_variables variable_1="R" variable_2="R"/>
      <map_variables variable_1="GAD" variable_2="GAD"/>
      <map_variables variable_1="RGAD" variable_2="RGAD"/>
   </connection>
   <connection>
      <map_components component_1="D4" component_2="differentials"/>
      <map_variables variable_1="D4" variable_2="D4"/>
      <map_variables variable_1="D" variable_2="D"/>
      <map_variables variable_1="RGA" variable_2="RGA"/>
      <map_variables variable_1="RGAD" variable_2="RGAD"/>
   </connection>
<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
<rdf:Description rdf:about="">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n1"/>
</creator>
<created xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:nodeID="n2"/>
</created>
</rdf:Description>
<rdf:Description rdf:nodeID="n3">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n4"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n1">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n5"/>
</N>
<EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n6"/>
</EMAIL>
<ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n7"/>
</ORG>
</rdf:Description>
<rdf:Description rdf:nodeID="n8">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Farquhar</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Marilyn</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Gist</Other>
</rdf:Description>
<rdf:Description rdf:nodeID="n7">
<Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Auckland Bioengineering Institute</Orgunit>
<Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The University of Auckland</Orgname>
</rdf:Description>
<rdf:Description rdf:nodeID="n9">
<rdf:first>
<rdf:Description rdf:nodeID="n10"/>
</rdf:first>
<rdf:rest>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
</rdf:rest>
</rdf:Description>
<rdf:Description rdf:nodeID="n11">
<rdf:value>
<rdf:Description rdf:nodeID="n12"/>
</rdf:value>
<subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type>
</rdf:Description>
<rdf:Description rdf:nodeID="n13">
<FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Geoffrey Nunns</FN>
</rdf:Description>
<rdf:Description rdf:nodeID="n14">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n15"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n16">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n17"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n17">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Bornheimer</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Scott</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">J</Other>
</rdf:Description>
<rdf:Description rdf:nodeID="n18">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n19"/>
</creator>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en"> Computational modeling reveals how interplay between components of a GTPase-cycle module regulates signal transduction</title>
<issued xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:nodeID="n20"/>
</issued>
<Journal xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n21"/>
</Journal>
<volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">101</volume>
<first_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">15899</first_page>
<last_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">15904</last_page>
</rdf:Description>
<rdf:Description rdf:nodeID="n22">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n16"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n23">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n8"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n24">
<subject xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n11"/>
</subject>
</rdf:Description>
<rdf:Description rdf:nodeID="n21">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">PNAS</title>
</rdf:Description>
<rdf:Description rdf:nodeID="n5">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Nunns</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Geoffrey</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Rogan</Other>
</rdf:Description>
<rdf:Description rdf:nodeID="n20">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2004-11-04</W3CDTF>
</rdf:Description>
<rdf:Description rdf:nodeID="n25">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n23"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n19">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
</rdf:type>
<rdf:_1>
<rdf:Description rdf:nodeID="n22"/>
</rdf:_1>
<rdf:_3>
<rdf:Description rdf:nodeID="n25"/>
</rdf:_3>
<rdf:_2>
<rdf:Description rdf:nodeID="n14"/>
</rdf:_2>
<rdf:_4>
<rdf:Description rdf:nodeID="n3"/>
</rdf:_4>
</rdf:Description>
<rdf:Description rdf:nodeID="n6">
<rdf:type>
<rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/>
</rdf:type>
<rdf:value xml:lang="en">gnunns1@jhu.edu</rdf:value>
</rdf:Description>
<rdf:Description rdf:nodeID="n26">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n13"/>
</creator>
<rdf:value xml:lang="en">This is the CellML description of Bornheimer et al.'s 2004 mathematical model of a GTPase-cycle module.</rdf:value>
</rdf:Description>
<rdf:Description rdf:nodeID="n15">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n27"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n27">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Maurya</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Mano</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">R</Other>
</rdf:Description>
<rdf:Description rdf:nodeID="n10">
<pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">10000</pointDensity>
<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">10</endingValue>
</rdf:Description>
<rdf:Description rdf:nodeID="n28">
<JournalArticle xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n18"/>
</JournalArticle>
<Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">15520372</Pubmed_id>
</rdf:Description>
<rdf:Description rdf:nodeID="n2">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2010-04-30</W3CDTF>
</rdf:Description>
<rdf:Description rdf:nodeID="n29">
<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n9"/>
</boundIntervals>
</rdf:Description>
<rdf:Description rdf:about="#bornheimer_2004">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">The Bornheimer et al. 2004 model of a GTPase-cycle module.</title>
<simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n29"/>
</simulation>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n24"/>
</reference>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n28"/>
</reference>
<cmeta:comment>
<rdf:Description rdf:nodeID="n26"/>
</cmeta:comment>
</rdf:Description>
<rdf:Description rdf:nodeID="n4">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n30"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n12">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/>
</rdf:type>
<rdf:_1 xml:lang="en">signal transduction</rdf:_1>
<rdf:_3 xml:lang="en">systems biology</rdf:_3>
<rdf:_2 xml:lang="en">GTPase-cycle module</rdf:_2>
</rdf:Description>
<rdf:Description rdf:nodeID="n30">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Subramaniam</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Shankar</Given>
</rdf:Description>
</rdf:RDF>
</model>