//   FILE :  cui_2008.xml
//
// CREATED :  12th May 2008
//
// LAST MODIFIED : 12th May 2008
//
// AUTHOR :  Catherine Lloyd
//           Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.1 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Cui and Kaandorp's 2008 mathematical model of the calcium-calcineurin signalling network in cardiac myocytes.
//
// CHANGES:
// publisher: The University of Auckland, Auckland Bioengineering Institute
// comment: FN Catherine Lloyd; This CellML model runs in both PCEnv and COR to recreate the published results. The units have been checked and they are consistent.
// created: W3CDTF 2008-05-14T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// reference: subject_type keyword; cardiac; cardiac mycocyte; signal transduction
// reference: Given Jiangjun; Family Cui; Given Jaap; Family Kaandorp; Other A; title Simulating Complex Calcium-Calcineurin Signaling Network; volume 5013; Pubmed_id 16445978; first_page 110; title Lecture Notes in Computer Science; W3CDTF 2008-06-00 00:00; last_page 119
def model cui_2008 as
  // Modelling the calcium-calcineurin signalling network in cardiac myocytes
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both PCEnv and COR to recreate the published results. The units have been checked and they are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: Understanding of processes in which calcium signaling is involved is of fundamental importance in systems biology and has many applications in medicine. In this paper we have studied the particular case of the complex calcium-calcineurin-MCIP-NFAT signaling network in cardiac myocytes, the understanding of which is critical for treatment of pathologic hypertrophy and heart failure. By including some most recent experimental
  //
  // In 2006, Shin et al. published a paper which modelled the dual role of MCIP in cardiac hypertrophy. In the study described here, Cui and Kaandorp have extended this model to include more recent and extensive experimental data. They used Cellerator (http://www.cellerator.org/), an open source software, to automatically generate the equations, and the model was subsequently translated into CellML to facilitate future model exchange, reuse and implementation.
  //
  // model diagram
  //
  // A schematic diagram of the Ca2+-calcineurin-MCIP-NFAT signalling networks in cardiac myocytes described by the model. Abbreviations: calmodulin (CaM); calcineurin (CaN); activated calcineurin (CaN*); nuclear factor of activated T-cells (NFAT); phosphorylated NFAT (NFATP); modulatory calcineurin-interacting protein (MCIP); phosphorylated MCIP on serine 112 (MCIPP); phosphorylated MCIP on both serine 112 and serine 108 (MCIPPP); big mitogen-activated protein kinase 1 (BMK1); glycogen synthase 3
  //
  // The original book chapter reference is cited below:
  //
  // Simulating Complex Calcium-Calcineurin Signaling Network, Jiangjun Cui and Jaap A. Kaandorp, 2008, Lecture Notes in Computer Science, 5013, 110-119, PubMed ID: 16445978 (http://www.ncbi.nlm.nih.gov/pubmed/16445978).
  def unit minute as
    unit second {mult: 60.0};
  enddef;
  def unit micromolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit flux as
    unit micromolar;
    unit minute {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit micromolar {expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit fifth_order_rate_constant as
    unit micromolar {expo: -4};
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;
  // substrates : enzymes, reactants and products

  // title: BMK1
  // alternative: big mitogen-activated protein kinase 1
  def comp BMK1 as
    var BMK1: micromolar {init: 0.012, pub: out};
    var v10a: flux {pub: in};
    var v10b: flux {pub: in};
    var time: minute {pub: in};
    ode(BMK1, time) = v10b-v10a;
  enddef;

  // title: MRNA
  // alternative: MCIP mRNA
  def comp MRNA as
    var MRNA: micromolar {init: 3.33E-4, pub: out};
    var v18: flux {pub: in};
    var v19: flux {pub: in};
    var time: minute {pub: in};
    ode(MRNA, time) = v19-v18;
  enddef;

  // title: NFATc
  // alternative: cytosolic NFAT
  def comp NFATc as
    var NFATc: micromolar {init: 2E-5, pub: out};
    var v1: flux {pub: in};
    var v14: flux {pub: in};
    var v15: flux {pub: in};
    var time: minute {pub: in};
    ode(NFATc, time) = v14-(v1+v15);
  enddef;

  // title: NFATn
  // alternative: nuclear NFAT
  def comp NFATn as
    var NFATn: micromolar {init: 4.99E-4, pub: out};
    var v1: flux {pub: in};
    var v16: flux {pub: in};
    var v17: flux {pub: in};
    var v18: flux {pub: in};
    var time: minute {pub: in};
    ode(NFATn, time) = v1+v16-(v17+v18);
  enddef;

  // title: NFATpc
  // alternative: cytosolic NFATp
  def comp NFATpc as
    var NFATpc: micromolar {init: 4.94E-3, pub: out};
    var v2: flux {pub: in};
    var v9: flux {pub: in};
    var v14: flux {pub: in};
    var v15: flux {pub: in};
    var time: minute {pub: in};
    ode(NFATpc, time) = v2+v15-(v9+v14);
  enddef;

  // title: NFATpn
  // alternative: nuclear NFATp
  def comp NFATpn as
    var NFATpn: micromolar {init: 8.01E-5, pub: out};
    var v2: flux {pub: in};
    var v16: flux {pub: in};
    var v17: flux {pub: in};
    var time: minute {pub: in};
    ode(NFATpn, time) = v17-(v2+v16);
  enddef;

  // title: GSK3betac
  // alternative: cytosolic glycogen synthase 3-beta
  def comp GSK3betac as
    var GSK3betac: micromolar {init: 0.17, pub: out};
    var v3: flux {pub: in};
    var v12a: flux {pub: in};
    var v12b: flux {pub: in};
    var v15a: flux {pub: in};
    var v15b: flux {pub: in};
    var time: minute {pub: in};
    ode(GSK3betac, time) = v12b+v15b-(v3+v12a+v15a);
  enddef;

  // title: GSK3betan
  // alternative: nuclear glycogen synthase 3-beta
  def comp GSK3betan as
    var GSK3betan: micromolar {init: 0.339, pub: out};
    var v3: flux {pub: in};
    var v17a: flux {pub: in};
    var v17b: flux {pub: in};
    var time: minute {pub: in};
    ode(GSK3betan, time) = v3+v17b-v17a;
  enddef;

  // title: CaNc
  // alternative: cytosolic inactive calcineurin
  def comp CaNc as
    var CaNc: micromolar {init: 0.91, pub: out};
    var v6: flux {pub: in};
    var time: minute {pub: in};
    ode(CaNc, time) = -v6;
  enddef;

  // title: CaNc_star
  // alternative: cytosolic activated calcineurin
  def comp CaNc_star as
    var CaNc_star: micromolar {init: 0.0275, pub: out};
    var v4: flux {pub: in};
    var v6: flux {pub: in};
    var v7: flux {pub: in};
    var v11a: flux {pub: in};
    var v11b: flux {pub: in};
    var v13a: flux {pub: in};
    var v13b: flux {pub: in};
    var v14a: flux {pub: in};
    var v14b: flux {pub: in};
    var time: minute {pub: in};
    ode(CaNc_star, time) = v6+v11b+v13b+v14b-(v4+v7+v11a+v13a+v14a);
  enddef;

  // title: CaNn_star
  // alternative: nuclear activated calcineurin
  def comp CaNn_star as
    var CaNn_star: micromolar {init: 0.0568, pub: out};
    var v4: flux {pub: in};
    var v16a: flux {pub: in};
    var v16b: flux {pub: in};
    var time: minute {pub: in};
    ode(CaNn_star, time) = v4+v16b-v16a;
  enddef;

  // title: CaNn
  // alternative: nuclear inactive calcineurin
  def comp CaNn as
    var CaNn: micromolar {init: 0.0057, pub: out};
    var v6: flux {pub: in};
    var time: minute {pub: in};
    ode(CaNn, time) = -v6;
  enddef;

  // title: CaM
  // alternative: calmodulin
  def comp CaM as
    var CaM: micromolar {init: 25.2, pub: out};
    var v5: flux {pub: in};
    var time: minute {pub: in};
    ode(CaM, time) = -v5;
  enddef;

  // title: CaMCa
  // alternative: calcium-calmodulin complex
  def comp CaMCa as
    var CaMCa: micromolar {init: 7.88E-7, pub: out};
    var v5: flux {pub: in};
    var v6: flux {pub: in};
    var time: minute {pub: in};
    ode(CaMCa, time) = v5-v6;
  enddef;

  // title: MCIP
  // alternative: modulatory calcineurin-interacting protein
  def comp MCIP as
    var MCIP: micromolar {init: 2.15E-4, pub: out};
    var v7: flux {pub: in};
    var v10: flux {pub: in};
    var v11: flux {pub: in};
    var v19: flux {pub: in};
    var time: minute {pub: in};
    ode(MCIP, time) = v11-(v7+v10+v19);
  enddef;

  // title: MCIPp
  // alternative: phosphorylated MCIP on serine 112
  def comp MCIPp as
    var MCIPp: micromolar {init: 7.76E-3, pub: out};
    var v10: flux {pub: in};
    var v11: flux {pub: in};
    var v12: flux {pub: in};
    var v13: flux {pub: in};
    var time: minute {pub: in};
    ode(MCIPp, time) = v10+v13-(v11+v12);
  enddef;

  // title: MCIPpp
  // alternative: phosphorylated MCIP on both serine 112 and serine 108
  def comp MCIPpp as
    var MCIPpp: micromolar {init: 0.0798, pub: out};
    var v8: flux {pub: in};
    var v12: flux {pub: in};
    var v13: flux {pub: in};
    var time: minute {pub: in};
    ode(MCIPpp, time) = v12-(v8+v13);
  enddef;

  // title: Comp1
  // alternative: complex formed by MCIP and calcineurin
  def comp Comp1 as
    var Comp1: micromolar {init: 5.21E-3, pub: out};
    var v7: flux {pub: in};
    var time: minute {pub: in};
    ode(Comp1, time) = v7;
  enddef;

  // title: Comp2
  // alternative: complex formed by MCIPPP and 14-3-3
  def comp Comp2 as
    var Comp2: micromolar {init: 0.283, pub: out};
    var v8: flux {pub: in};
    var time: minute {pub: in};
    ode(Comp2, time) = v8;
  enddef;

  // title: Comp3
  // alternative: complex formed by NFATP and 14-3-3
  def comp Comp3 as
    var Comp3: micromolar {init: 0.014, pub: out};
    var v9: flux {pub: in};
    var time: minute {pub: in};
    ode(Comp3, time) = v9;
  enddef;

  // title: P1433
  // alternative: 14-3-3 protein
  def comp P1433 as
    var P1433: micromolar {init: 0.708, pub: out};
    var v8: flux {pub: in};
    var v9: flux {pub: in};
    var time: minute {pub: in};
    ode(P1433, time) = -(v8+v9);
  enddef;
  // reactants-enzyme complexes

  def comp MCIP_BMK1 as
    var MCIP_BMK1: micromolar {init: 2.14E-5, pub: out};
    var v10a: flux {pub: in};
    var v10b: flux {pub: in};
    var time: minute {pub: in};
    ode(MCIP_BMK1, time) = v10a-v10b;
  enddef;

  def comp MCIPp_CaNc_star as
    var MCIPp_CaNc_star: micromolar {init: 1.07E-4, pub: out};
    var v11a: flux {pub: in};
    var v11b: flux {pub: in};
    var time: minute {pub: in};
    ode(MCIPp_CaNc_star, time) = v11a-v11b;
  enddef;

  def comp MCIPp_GSK3betac as
    var MCIPp_GSK3betac: micromolar {init: 1.1E-3, pub: out};
    var v12a: flux {pub: in};
    var v12b: flux {pub: in};
    var time: minute {pub: in};
    ode(MCIPp_GSK3betac, time) = v12a-v12b;
  enddef;

  def comp MCIPpp_CaNc_star as
    var MCIPpp_CaNc_star: micromolar {init: 1.1E-3, pub: out};
    var v13a: flux {pub: in};
    var v13b: flux {pub: in};
    var time: minute {pub: in};
    ode(MCIPpp_CaNc_star, time) = v13a-v13b;
  enddef;

  def comp NFATpc_CaNc_star as
    var NFATpc_CaNc_star: micromolar {init: 8.15E-5, pub: out};
    var v14a: flux {pub: in};
    var v14b: flux {pub: in};
    var time: minute {pub: in};
    ode(NFATpc_CaNc_star, time) = v14a-v14b;
  enddef;

  def comp NFATc_GSK3betac as
    var NFATc_GSK3betac: micromolar {init: 1.36E-6, pub: out};
    var v15a: flux {pub: in};
    var v15b: flux {pub: in};
    var time: minute {pub: in};
    ode(NFATc_GSK3betac, time) = v15a-v15b;
  enddef;

  def comp NFATpn_CaNn_star as
    var NFATpn_CaNn_star: micromolar {init: 2.27E-6, pub: out};
    var v16a: flux {pub: in};
    var v16b: flux {pub: in};
    var time: minute {pub: in};
    ode(NFATpn_CaNn_star, time) = v16a-v16b;
  enddef;

  def comp NFATn_GSK3betan as
    var NFATn_GSK3betan: micromolar {init: 8.46E-5, pub: out};
    var v17a: flux {pub: in};
    var v17b: flux {pub: in};
    var time: minute {pub: in};
    ode(NFATn_GSK3betan, time) = v17a-v17b;
  enddef;
  // Simple Irreversible Reactions

  def comp v1 as
    var v1: flux {pub: out};
    var NFATc: micromolar {pub: in};
    var k29: first_order_rate_constant {pub: in};
    v1 = k29*NFATc;
  enddef;

  def comp v2 as
    var v2: flux {pub: out};
    var NFATpn: micromolar {pub: in};
    var k30: first_order_rate_constant {pub: in};
    v2 = k30*NFATpn;
  enddef;
  // Simple Reversible Reactions

  def comp v3 as
    var v3: flux {pub: out};
    var GSK3betac: micromolar {pub: in};
    var GSK3betan: micromolar {pub: in};
    var k31: first_order_rate_constant {pub: in};
    var k32: first_order_rate_constant {pub: in};
    v3 = k31*GSK3betac-k32*GSK3betan;
  enddef;

  def comp v4 as
    var v4: flux {pub: out};
    var CaNc_star: micromolar {pub: in};
    var CaNn_star: micromolar {pub: in};
    var k33: first_order_rate_constant {pub: in};
    var k34: first_order_rate_constant {pub: in};
    v4 = k33*CaNc_star-k34*CaNn_star;
  enddef;
  // Reversible Binding Reactions

  def comp v5 as
    var v5: flux {pub: out};
    var CaM: micromolar {pub: in};
    var Ca: micromolar {pub: in};
    var CaMCa: micromolar {pub: in};
    var k1: fifth_order_rate_constant {pub: in};
    var k2: first_order_rate_constant {pub: in};
    v5 = k1*CaM*pow(Ca, 4{dimensionless})-k2*CaMCa;
  enddef;

  def comp v6 as
    var v6: flux {pub: out};
    var CaNc: micromolar {pub: in};
    var CaNc_star: micromolar {pub: in};
    var CaMCa: micromolar {pub: in};
    var k3: second_order_rate_constant {pub: in};
    var k4: first_order_rate_constant {pub: in};
    v6 = k3*CaMCa*CaNc-k4*CaNc_star;
  enddef;

  def comp v7 as
    var v7: flux {pub: out};
    var MCIP: micromolar {pub: in};
    var CaNc_star: micromolar {pub: in};
    var Comp1: micromolar {pub: in};
    var k5: second_order_rate_constant {pub: in};
    var k6: first_order_rate_constant {pub: in};
    v7 = k5*CaNc_star*MCIP-k6*Comp1;
  enddef;

  def comp v8 as
    var v8: flux {pub: out};
    var MCIPpp: micromolar {pub: in};
    var P1433: micromolar {pub: in};
    var Comp2: micromolar {pub: in};
    var k19: second_order_rate_constant {pub: in};
    var k20: first_order_rate_constant {pub: in};
    v8 = k19*P1433*MCIPpp-k20*Comp2;
  enddef;

  def comp v9 as
    var v9: flux {pub: out};
    var NFATpc: micromolar {pub: in};
    var P1433: micromolar {pub: in};
    var Comp3: micromolar {pub: in};
    var k27: second_order_rate_constant {pub: in};
    var k28: first_order_rate_constant {pub: in};
    v9 = k27*NFATpc*P1433-k28*Comp3;
  enddef;
  // Catalytic Binding Reactions

  def comp v10 as
    var v10: flux {pub: out};
    var v10a: flux {pub: out};
    var v10b: flux {pub: out};
    var BMK1: micromolar {pub: in};
    var MCIP_BMK1: micromolar {pub: in};
    var MCIP: micromolar {pub: in};
    var k7: second_order_rate_constant {pub: in};
    var k8: first_order_rate_constant {pub: in};
    var k9: first_order_rate_constant {pub: in};
    v10a = k7*MCIP*BMK1-k8*MCIP_BMK1;
    v10b = k9*MCIP_BMK1;
    v10 = v10a+v10b;
  enddef;

  def comp v11 as
    var v11: flux {pub: out};
    var v11a: flux {pub: out};
    var v11b: flux {pub: out};
    var MCIPp_CaNc_star: micromolar {pub: in};
    var CaNc_star: micromolar {pub: in};
    var MCIPp: micromolar {pub: in};
    var k10: second_order_rate_constant {pub: in};
    var k11: first_order_rate_constant {pub: in};
    var k12: first_order_rate_constant {pub: in};
    v11a = k10*MCIPp*CaNc_star-k11*MCIPp_CaNc_star;
    v11b = k12*MCIPp_CaNc_star;
    v11 = v11a+v11b;
  enddef;

  def comp v12 as
    var v12: flux {pub: out};
    var v12a: flux {pub: out};
    var v12b: flux {pub: out};
    var MCIPp_GSK3betac: micromolar {pub: in};
    var GSK3betac: micromolar {pub: in};
    var MCIPp: micromolar {pub: in};
    var k13: second_order_rate_constant {pub: in};
    var k14: first_order_rate_constant {pub: in};
    var k15: first_order_rate_constant {pub: in};
    v12a = k13*MCIPp*GSK3betac-k14*MCIPp_GSK3betac;
    v12b = k15*MCIPp_GSK3betac;
    v12 = v12a+v12b;
  enddef;

  def comp v13 as
    var v13: flux {pub: out};
    var v13a: flux {pub: out};
    var v13b: flux {pub: out};
    var MCIPpp_CaNc_star: micromolar {pub: in};
    var CaNc_star: micromolar {pub: in};
    var MCIPpp: micromolar {pub: in};
    var k16: second_order_rate_constant {pub: in};
    var k17: first_order_rate_constant {pub: in};
    var k18: first_order_rate_constant {pub: in};
    v13a = k16*MCIPpp*CaNc_star-k17*MCIPpp_CaNc_star;
    v13b = k18*MCIPpp_CaNc_star;
    v13 = v13a+v13b;
  enddef;

  def comp v14 as
    var v14: flux {pub: out};
    var v14a: flux {pub: out};
    var v14b: flux {pub: out};
    var NFATpc_CaNc_star: micromolar {pub: in};
    var CaNc_star: micromolar {pub: in};
    var NFATpc: micromolar {pub: in};
    var k21: second_order_rate_constant {pub: in};
    var k22: first_order_rate_constant {pub: in};
    var k23: first_order_rate_constant {pub: in};
    v14a = k21*NFATpc*CaNc_star-k22*NFATpc_CaNc_star;
    v14b = k23*NFATpc_CaNc_star;
    v14 = v14a+v14b;
  enddef;

  def comp v15 as
    var v15: flux {pub: out};
    var v15a: flux {pub: out};
    var v15b: flux {pub: out};
    var NFATc_GSK3betac: micromolar {pub: in};
    var GSK3betac: micromolar {pub: in};
    var NFATc: micromolar {pub: in};
    var k24: second_order_rate_constant {pub: in};
    var k25: first_order_rate_constant {pub: in};
    var k26: first_order_rate_constant {pub: in};
    v15a = k24*NFATc*GSK3betac-k25*NFATc_GSK3betac;
    v15b = k26*NFATc_GSK3betac;
    v15 = v15a+v15b;
  enddef;

  def comp v16 as
    var v16: flux {pub: out};
    var v16a: flux {pub: out};
    var v16b: flux {pub: out};
    var NFATpn_CaNn_star: micromolar {pub: in};
    var CaNn_star: micromolar {pub: in};
    var NFATpn: micromolar {pub: in};
    var k35: second_order_rate_constant {pub: in};
    var k36: first_order_rate_constant {pub: in};
    var k37: first_order_rate_constant {pub: in};
    v16a = k35*NFATpn*CaNn_star-k36*NFATpn_CaNn_star;
    v16b = k37*NFATpn_CaNn_star;
    v16 = v16a+v16b;
  enddef;

  def comp v17 as
    var v17: flux {pub: out};
    var v17a: flux {pub: out};
    var v17b: flux {pub: out};
    var NFATn_GSK3betan: micromolar {pub: in};
    var GSK3betan: micromolar {pub: in};
    var NFATn: micromolar {pub: in};
    var k38: second_order_rate_constant {pub: in};
    var k39: first_order_rate_constant {pub: in};
    var k40: first_order_rate_constant {pub: in};
    v17a = k38*NFATn*GSK3betan-k39*NFATn_GSK3betan;
    v17b = k40*NFATn_GSK3betan;
    v17 = v17a+v17b;
  enddef;
  // transcription control process of MCIP by NFAT

  def comp v18 as
    var v18: flux {pub: out};
    var NFATn: micromolar {pub: in};
    var MRNA: micromolar {pub: in};
    var k41: first_order_rate_constant {pub: in};
    var k42: first_order_rate_constant {pub: in};
    v18 = k41*NFATn-k42*MRNA;
  enddef;

  def comp v19 as
    var v19: flux {pub: out};
    var t_half: minute {pub: in};
    var MRNA: micromolar {pub: in};
    var MCIP: micromolar {pub: in};
    var k43: first_order_rate_constant {pub: in};
    v19 = k43*MRNA-ln(2.0{dimensionless})/t_half*MCIP;
  enddef;

  def comp model_parameters as
    var k1: fifth_order_rate_constant {init: 5, pub: out};
    var k2: first_order_rate_constant {init: 100, pub: out};
    var k3: second_order_rate_constant {init: 2760, pub: out};
    var k4: first_order_rate_constant {init: 0.072, pub: out};
    var k5: second_order_rate_constant {init: 50, pub: out};
    var k6: first_order_rate_constant {init: 0.0567, pub: out};
    var k7: second_order_rate_constant {init: 5, pub: out};
    var k8: first_order_rate_constant {init: 0.1, pub: out};
    var k9: first_order_rate_constant {init: 0.5, pub: out};
    var k10: second_order_rate_constant {init: 0.1, pub: out};
    var k11: first_order_rate_constant {init: 0.1, pub: out};
    var k12: first_order_rate_constant {init: 0.1, pub: out};
    var k13: second_order_rate_constant {init: 0.5, pub: out};
    var k14: first_order_rate_constant {init: 0.5, pub: out};
    var k15: first_order_rate_constant {init: 0.1, pub: out};
    var k16: second_order_rate_constant {init: 0.1, pub: out};
    var k17: first_order_rate_constant {init: 0.1, pub: out};
    var k18: first_order_rate_constant {init: 0.1, pub: out};
    var k19: second_order_rate_constant {init: 0.5, pub: out};
    var k20: first_order_rate_constant {init: 0.1, pub: out};
    var k21: second_order_rate_constant {init: 0.15, pub: out};
    var k22: first_order_rate_constant {init: 0.15, pub: out};
    var k23: first_order_rate_constant {init: 0.15, pub: out};
    var k24: second_order_rate_constant {init: 0.1, pub: out};
    var k25: first_order_rate_constant {init: 0.15, pub: out};
    var k26: first_order_rate_constant {init: 0.1, pub: out};
    var k27: second_order_rate_constant {init: 0.4, pub: out};
    var k28: first_order_rate_constant {init: 0.1, pub: out};
    var k29: first_order_rate_constant {init: 0.4, pub: out};
    var k30: first_order_rate_constant {init: 0.1, pub: out};
    var k31: first_order_rate_constant {init: 0.1, pub: out};
    var k32: first_order_rate_constant {init: 0.05, pub: out};
    var k33: first_order_rate_constant {init: 0.114, pub: out};
    var k34: first_order_rate_constant {init: 0.0552, pub: out};
    var k35: second_order_rate_constant {init: 0.15, pub: out};
    var k36: first_order_rate_constant {init: 0.1, pub: out};
    var k37: first_order_rate_constant {init: 0.2, pub: out};
    var k38: second_order_rate_constant {init: 0.1, pub: out};
    var k39: first_order_rate_constant {init: 0.1, pub: out};
    var k40: first_order_rate_constant {init: 0.1, pub: out};
    var k41: first_order_rate_constant {init: 0.02, pub: out};
    var k42: first_order_rate_constant {init: 0.03, pub: out};
    var k43: first_order_rate_constant {init: 0.03, pub: out};
    var t_half: minute {init: 15, pub: out};
    var Ca: micromolar {init: 0.2, pub: out};
  enddef;
  def map between BMK1 and environment for
    vars time and time;
  enddef;
  def map between MRNA and environment for
    vars time and time;
  enddef;
  def map between NFATc and environment for
    vars time and time;
  enddef;
  def map between NFATn and environment for
    vars time and time;
  enddef;
  def map between NFATpc and environment for
    vars time and time;
  enddef;
  def map between NFATpn and environment for
    vars time and time;
  enddef;
  def map between GSK3betac and environment for
    vars time and time;
  enddef;
  def map between GSK3betan and environment for
    vars time and time;
  enddef;
  def map between CaNc and environment for
    vars time and time;
  enddef;
  def map between CaNn and environment for
    vars time and time;
  enddef;
  def map between CaNc_star and environment for
    vars time and time;
  enddef;
  def map between CaNn_star and environment for
    vars time and time;
  enddef;
  def map between CaM and environment for
    vars time and time;
  enddef;
  def map between CaMCa and environment for
    vars time and time;
  enddef;
  def map between MCIP and environment for
    vars time and time;
  enddef;
  def map between MCIPp and environment for
    vars time and time;
  enddef;
  def map between MCIPpp and environment for
    vars time and time;
  enddef;
  def map between Comp1 and environment for
    vars time and time;
  enddef;
  def map between Comp2 and environment for
    vars time and time;
  enddef;
  def map between Comp3 and environment for
    vars time and time;
  enddef;
  def map between P1433 and environment for
    vars time and time;
  enddef;
  def map between MCIP_BMK1 and environment for
    vars time and time;
  enddef;
  def map between MCIPp_CaNc_star and environment for
    vars time and time;
  enddef;
  def map between MCIPp_GSK3betac and environment for
    vars time and time;
  enddef;
  def map between MCIPpp_CaNc_star and environment for
    vars time and time;
  enddef;
  def map between NFATpc_CaNc_star and environment for
    vars time and time;
  enddef;
  def map between NFATc_GSK3betac and environment for
    vars time and time;
  enddef;
  def map between NFATpn_CaNn_star and environment for
    vars time and time;
  enddef;
  def map between NFATn_GSK3betan and environment for
    vars time and time;
  enddef;
  def map between v10 and BMK1 for
    vars v10a and v10a;
    vars v10b and v10b;
    vars BMK1 and BMK1;
  enddef;
  def map between v18 and MRNA for
    vars v18 and v18;
    vars MRNA and MRNA;
  enddef;
  def map between v19 and MRNA for
    vars v19 and v19;
    vars MRNA and MRNA;
  enddef;
  def map between v1 and NFATc for
    vars v1 and v1;
    vars NFATc and NFATc;
  enddef;
  def map between v14 and NFATc for
    vars v14 and v14;
  enddef;
  def map between v15 and NFATc for
    vars v15 and v15;
    vars NFATc and NFATc;
  enddef;
  def map between v1 and NFATn for
    vars v1 and v1;
  enddef;
  def map between v16 and NFATn for
    vars v16 and v16;
  enddef;
  def map between v17 and NFATn for
    vars v17 and v17;
    vars NFATn and NFATn;
  enddef;
  def map between v18 and NFATn for
    vars v18 and v18;
    vars NFATn and NFATn;
  enddef;
  def map between v2 and NFATpc for
    vars v2 and v2;
  enddef;
  def map between v9 and NFATpc for
    vars v9 and v9;
    vars NFATpc and NFATpc;
  enddef;
  def map between v14 and NFATpc for
    vars v14 and v14;
    vars NFATpc and NFATpc;
  enddef;
  def map between v15 and NFATpc for
    vars v15 and v15;
  enddef;
  def map between v2 and NFATpn for
    vars v2 and v2;
    vars NFATpn and NFATpn;
  enddef;
  def map between v16 and NFATpn for
    vars v16 and v16;
    vars NFATpn and NFATpn;
  enddef;
  def map between v17 and NFATpn for
    vars v17 and v17;
  enddef;
  def map between v3 and GSK3betac for
    vars v3 and v3;
    vars GSK3betac and GSK3betac;
  enddef;
  def map between v12 and GSK3betac for
    vars v12a and v12a;
    vars v12b and v12b;
    vars GSK3betac and GSK3betac;
  enddef;
  def map between v15 and GSK3betac for
    vars v15a and v15a;
    vars v15b and v15b;
    vars GSK3betac and GSK3betac;
  enddef;
  def map between v3 and GSK3betan for
    vars v3 and v3;
    vars GSK3betan and GSK3betan;
  enddef;
  def map between v17 and GSK3betan for
    vars v17a and v17a;
    vars v17b and v17b;
    vars GSK3betan and GSK3betan;
  enddef;
  def map between v6 and CaNc for
    vars v6 and v6;
    vars CaNc and CaNc;
  enddef;
  def map between v4 and CaNc_star for
    vars v4 and v4;
    vars CaNc_star and CaNc_star;
  enddef;
  def map between v6 and CaNc_star for
    vars v6 and v6;
    vars CaNc_star and CaNc_star;
  enddef;
  def map between v7 and CaNc_star for
    vars v7 and v7;
    vars CaNc_star and CaNc_star;
  enddef;
  def map between v11 and CaNc_star for
    vars v11a and v11a;
    vars v11b and v11b;
    vars CaNc_star and CaNc_star;
  enddef;
  def map between v13 and CaNc_star for
    vars v13a and v13a;
    vars v13b and v13b;
    vars CaNc_star and CaNc_star;
  enddef;
  def map between v14 and CaNc_star for
    vars v14a and v14a;
    vars v14b and v14b;
    vars CaNc_star and CaNc_star;
  enddef;
  def map between v4 and CaNn_star for
    vars v4 and v4;
    vars CaNn_star and CaNn_star;
  enddef;
  def map between v16 and CaNn_star for
    vars v16a and v16a;
    vars v16b and v16b;
    vars CaNn_star and CaNn_star;
  enddef;
  def map between v6 and CaNn for
    vars v6 and v6;
  enddef;
  def map between v5 and CaM for
    vars v5 and v5;
    vars CaM and CaM;
  enddef;
  def map between v5 and CaMCa for
    vars v5 and v5;
    vars CaMCa and CaMCa;
  enddef;
  def map between v6 and CaMCa for
    vars v6 and v6;
    vars CaMCa and CaMCa;
  enddef;
  def map between v7 and MCIP for
    vars v7 and v7;
    vars MCIP and MCIP;
  enddef;
  def map between v10 and MCIP for
    vars v10 and v10;
    vars MCIP and MCIP;
  enddef;
  def map between v11 and MCIP for
    vars v11 and v11;
  enddef;
  def map between v19 and MCIP for
    vars v19 and v19;
    vars MCIP and MCIP;
  enddef;
  def map between v10 and MCIPp for
    vars v10 and v10;
  enddef;
  def map between v11 and MCIPp for
    vars v11 and v11;
    vars MCIPp and MCIPp;
  enddef;
  def map between v12 and MCIPp for
    vars v12 and v12;
    vars MCIPp and MCIPp;
  enddef;
  def map between v13 and MCIPp for
    vars v13 and v13;
  enddef;
  def map between v8 and MCIPpp for
    vars v8 and v8;
    vars MCIPpp and MCIPpp;
  enddef;
  def map between v12 and MCIPpp for
    vars v12 and v12;
  enddef;
  def map between v13 and MCIPpp for
    vars v13 and v13;
    vars MCIPpp and MCIPpp;
  enddef;
  def map between v7 and Comp1 for
    vars v7 and v7;
    vars Comp1 and Comp1;
  enddef;
  def map between v8 and Comp2 for
    vars v8 and v8;
    vars Comp2 and Comp2;
  enddef;
  def map between v9 and Comp3 for
    vars v9 and v9;
    vars Comp3 and Comp3;
  enddef;
  def map between v8 and P1433 for
    vars v8 and v8;
    vars P1433 and P1433;
  enddef;
  def map between v9 and P1433 for
    vars v9 and v9;
    vars P1433 and P1433;
  enddef;
  def map between v10 and MCIP_BMK1 for
    vars v10a and v10a;
    vars v10b and v10b;
    vars MCIP_BMK1 and MCIP_BMK1;
  enddef;
  def map between v11 and MCIPp_CaNc_star for
    vars v11a and v11a;
    vars v11b and v11b;
    vars MCIPp_CaNc_star and MCIPp_CaNc_star;
  enddef;
  def map between v12 and MCIPp_GSK3betac for
    vars v12a and v12a;
    vars v12b and v12b;
    vars MCIPp_GSK3betac and MCIPp_GSK3betac;
  enddef;
  def map between v13 and MCIPpp_CaNc_star for
    vars v13a and v13a;
    vars v13b and v13b;
    vars MCIPpp_CaNc_star and MCIPpp_CaNc_star;
  enddef;
  def map between v14 and NFATpc_CaNc_star for
    vars v14a and v14a;
    vars v14b and v14b;
    vars NFATpc_CaNc_star and NFATpc_CaNc_star;
  enddef;
  def map between v15 and NFATc_GSK3betac for
    vars v15a and v15a;
    vars v15b and v15b;
    vars NFATc_GSK3betac and NFATc_GSK3betac;
  enddef;
  def map between v16 and NFATpn_CaNn_star for
    vars v16a and v16a;
    vars v16b and v16b;
    vars NFATpn_CaNn_star and NFATpn_CaNn_star;
  enddef;
  def map between v17 and NFATn_GSK3betan for
    vars v17a and v17a;
    vars v17b and v17b;
    vars NFATn_GSK3betan and NFATn_GSK3betan;
  enddef;
  def map between model_parameters and v1 for
    vars k29 and k29;
  enddef;
  def map between model_parameters and v2 for
    vars k30 and k30;
  enddef;
  def map between model_parameters and v3 for
    vars k31 and k31;
    vars k32 and k32;
  enddef;
  def map between model_parameters and v4 for
    vars k33 and k33;
    vars k34 and k34;
  enddef;
  def map between model_parameters and v5 for
    vars k1 and k1;
    vars k2 and k2;
    vars Ca and Ca;
  enddef;
  def map between model_parameters and v6 for
    vars k3 and k3;
    vars k4 and k4;
  enddef;
  def map between model_parameters and v7 for
    vars k5 and k5;
    vars k6 and k6;
  enddef;
  def map between model_parameters and v8 for
    vars k19 and k19;
    vars k20 and k20;
  enddef;
  def map between model_parameters and v9 for
    vars k27 and k27;
    vars k28 and k28;
  enddef;
  def map between model_parameters and v10 for
    vars k7 and k7;
    vars k8 and k8;
    vars k9 and k9;
  enddef;
  def map between model_parameters and v11 for
    vars k10 and k10;
    vars k11 and k11;
    vars k12 and k12;
  enddef;
  def map between model_parameters and v12 for
    vars k13 and k13;
    vars k14 and k14;
    vars k15 and k15;
  enddef;
  def map between model_parameters and v13 for
    vars k16 and k16;
    vars k17 and k17;
    vars k18 and k18;
  enddef;
  def map between model_parameters and v14 for
    vars k21 and k21;
    vars k22 and k22;
    vars k23 and k23;
  enddef;
  def map between model_parameters and v15 for
    vars k24 and k24;
    vars k25 and k25;
    vars k26 and k26;
  enddef;
  def map between model_parameters and v16 for
    vars k35 and k35;
    vars k36 and k36;
    vars k37 and k37;
  enddef;
  def map between model_parameters and v17 for
    vars k38 and k38;
    vars k39 and k39;
    vars k40 and k40;
  enddef;
  def map between model_parameters and v18 for
    vars k41 and k41;
    vars k42 and k42;
  enddef;
  def map between model_parameters and v19 for
    vars k43 and k43;
    vars t_half and t_half;
  enddef;
enddef;
