// This CellML file was generated on 27/02/2007 at 15:14:55 using:
//
// COR (0.9.31.457)
// Copyright 2002-2006 Oxford Cardiac Electrophysiology Group
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// publisher: The University of Auckland, Bioengineering Institute
// comment: FN James Lawson; This model has been validated by Penny Noble of Oxford University and is known to run in COR and PCEnv. A PCEnv session file is also associated with this version. Model curated by Penny Noble using Demir 1994 Oxsoft Heart model code and Demir 1999 paper.
// created: W3CDTF 2002-02-06T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2002-02-28; Corrected some units.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2007-12-19T13:48:43+13:00; added cmeta:id's for some variables to allow referencing by PCEnv session; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2003-04-05; Changed the model name so the model loads in the database easier.; Given Autumn; Family Cuellar; Other A
// modification: W3CDTF 2002-07-18; Added more metadata.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2005-04-25; Changed equivalent to eq in apply id line.; Given Peter; Family Villiger; Other J
// modification: W3CDTF 2007-06-19T15:32:11+12:00; This model has been validated by Penny Noble of Oxford University.; Given Penny; Family Noble; Other J
// modification: W3CDTF 2002-07-18; Changed sign of i_rel in dCai-dt equation. Changed the name of sodium-calcium pump to an exchanger. Changed U_calculation from an equals sign to an equivalent sign.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2002-02-25; Corrected several equations.; Given Catherine; Family Lloyd; Other May
// bio_entity: Sinoatrial Node Cell
// simulation: endingValue 2; nonstandard-pointDensity 100000; maximumStepSize 0.1
// title: Demir et al's 1999 mathematical model of a rabbit sinoatrial node cell
// species: Rabbit
// reference: Pubmed_id 10362707; Given Semahat; Family Demir; Other S; Given John; Family Clark; Other W; Given Wayne; Family Giles; Other R; title Parasympathetic modulation of sinoatrial node pacemaker activity in rabbit heart: a unifying model; volume 276; first_page H2221; title American Journal of Physiology; W3CDTF 1999-06-01; last_page H2244
// reference: subject_type keyword; cardiac; signal transduction; sinoatrial node; electrophysiology
// comment: FN Catherine Lloyd; Below is a CellML description of Demir et al's 1999 mathematical model of parasympathetic modulation of sinoatrial node (SAN) pacemaker activity in a rabbit heart. Based on experimental data, this model is a development of their earlier model of the single rabbit SAN cell (1994). Modifications have been made enabling it to mimic the important effects of the second-messenger cAMP and to simulate the response of SAN cells to the neurotransmitter acetylcholine (ACh) and isoprenaline (Iso).
def model demir_1999 as
  // A Model Of Parasympathetic Modulation Of Pacemaker Rate, 1999
  //
  // Penny Noble
  //
  // Oxford University
  //
  // Model Status
  //
  // This model has been validated by Penny Noble of Oxford University and is known to run in COR and OpenCell to reproduce the published results. The units have been checked and are balanced.
  //
  // Model Structure
  //
  // ABSTRACT: We have extended our compartmental model [Am. J. Physiol. 266 (Cell Physiol. 35): C832-C852, 1994] of the single rabbit sinoatrial node (SAN) cell so that it can simulate cellular responses to bath applications of ACh and isoprenaline as well as the effects of neuronally released ACh. The model employs three different types of muscarinic receptors to explain the variety of responses observed in mammalian cardiac pacemaking cells subjected to vagal stimulation. The response of greatest interest is the ACh-sensitive change in cycle length that is not accompanied by a change in action potential duration or repolarization or hyperpolarization of the maximum diastolic potential. In this case, an ACh-sensitive K+ current is not involved. Membrane hyperpolarization occurs in response to much higher levels of vagal stimulation, and this response is also mimicked by the model. Here, an ACh-sensitive K+ current is involved. The well-known phase-resetting response of the SAN cell to single and periodically applied vagal bursts of impulses is also simulated in the presence and absence of the beta-agonist isoprenaline. Finally, the responses of the SAN cell to longer continuous trains of periodic vagal stimulation are simulated, and this can result in the complete cessation of pacemaking. Therefore, this model is 1) applicable over the full range of intensity and pattern of vagal input and 2) can offer biophysically based explanations for many of the phenomena associated with the autonomic control of cardiac pacemaking.
  //
  // The original paper reference is cited below:
  //
  // Parasympathetic modulation of sinoatrial node pacemaker activity in rabbit heart: a unifying model, Semahat S. Demir, John W. Clark and Wayne R. Giles, 1999, American Journal of Physiology, 276, H2221-H2244. PubMed ID: 10362707 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=10362707&dopt=Abstract)
  //
  // cell diagram of the Demir et al SAN model showing ionic currents, pumps and exchangers within the sarcolemma
  //
  // A schematic diagram describing the current flows across the cell membrane that are captured in the Demir et al 1999 model of the electrophysiological activity in a SAN cell.
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit picoS as
    unit siemens {pref: pico};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit microS_per_millimolar as
    unit microS;
    unit millimolar {expo: -1};
  enddef;
  def unit nanoA_per_millimolar as
    unit nanoA;
    unit millimolar {expo: -1};
  enddef;
  def unit nanoA_per_nanomolar_4 as
    unit nanoA;
    unit nanomolar {expo: -4};
  enddef;
  def unit millimolar_4 as
    unit millimolar {expo: 4};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit mul_per_second as
    unit litre {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit mm_cubed as
    unit litre {pref: micro};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit cm2_per_second as
    unit metre {expo: 2, pref: centi};
    unit second {expo: -1};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {init: -49.54105, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    var Cm: microF {init: 5.5e-5};
    var time: second {pub: in};
    var i_Na: nanoA {pub: in};
    var i_Ca_T: nanoA {pub: in};
    var i_Ca_L: nanoA {pub: in};
    var i_K: nanoA {pub: in};
    var i_f: nanoA {pub: in};
    var i_B: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_Ca_P: nanoA {pub: in};
    var i_K_ACh: nanoA {pub: in};
    ode(V, time) = -(i_Na+i_Ca_T+i_Ca_L+i_K+i_f+i_B+i_NaK+i_NaCa+i_Ca_P+i_K_ACh)/Cm;
  enddef;

  def comp sodium_current as
    var i_Na: nanoA {pub: out};
    var P_Na: mul_per_second {init: 0.00344};
    var E_Na: millivolt {pub: in};
    var Na_c: millimolar {pub: in};
    var F_ACh_Na: dimensionless;
    var ACh: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h1: dimensionless {priv: in};
    var h2: dimensionless {priv: in};
    F_ACh_Na = 1{dimensionless}-ACh/(ACh+1e-3{millimolar});
    i_Na = F_ACh_Na*P_Na*pow(m, 3{dimensionless})*h1*h2*Na_c*V*sqr(F)/(R*T)*(exp((V-E_Na)*F/(R*T))-1{dimensionless})/(exp(V*F/(R*T))-1{dimensionless});
  enddef;

  def comp sodium_current_m_gate as
    var m: dimensionless {init: 0.250113, pub: out};
    var m_infinity: dimensionless;
    var tau_m: second;
    var alpha_m: per_second;
    var beta_m: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_m = -824{per_millivolt_second}*(V+51.9{millivolt})/(exp((V+51.9{millivolt})/(-8.9{millivolt}))-1{dimensionless});
    beta_m = 32960{per_second}*exp((V+51.9{millivolt})/(-8.9{millivolt}));
    m_infinity = alpha_m/(alpha_m+beta_m);
    tau_m = 1{dimensionless}/(alpha_m+beta_m)+0.000015{second};
    ode(m, time) = (m_infinity-m)/tau_m;
  enddef;

  def comp sodium_current_h_gate as
    var h1: dimensionless {init: 0.001386897, pub: out};
    var h2: dimensionless {init: 0.002065463, pub: out};
    var h1_infinity: dimensionless;
    var h2_infinity: dimensionless;
    var tau_h1: second;
    var tau_h2: second;
    var alpha_h1: per_second;
    var beta_h1: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h1 = 165{per_second}*exp((V+101.3{millivolt})/(-12.6{millivolt}));
    beta_h1 = 12360{per_second}/(320{dimensionless}*exp((V+101.3{millivolt})/(-12.6{millivolt}))+1{dimensionless});
    h1_infinity = alpha_h1/(alpha_h1+beta_h1);
    tau_h1 = 1{dimensionless}/(alpha_h1+beta_h1);
    h2_infinity = h1_infinity;
    tau_h2 = 20{dimensionless}*tau_h1;
    ode(h1, time) = (h1_infinity-h1)/tau_h1;
    ode(h2, time) = (h2_infinity-h2)/tau_h2;
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L: nanoA {pub: out};
    var g_Ca_L: microS;
    var g_Ca_L_cont: microS {init: 0.02115};
    var F_cAMP_CaL: dimensionless;
    var cAMP: millimolar {pub: in};
    var E_Ca_L: millivolt {init: 46.4};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var d_L: dimensionless {priv: in};
    var d_L_infinity: dimensionless {priv: in};
    var f_L: dimensionless {priv: in};
    F_cAMP_CaL = 0.4{dimensionless}*(1{dimensionless}+4.5{dimensionless}*cAMP/(cAMP+6.5e-3{millimolar}))+0.03157{dimensionless};
    g_Ca_L = g_Ca_L_cont*F_cAMP_CaL;
    i_Ca_L = g_Ca_L*(f_L*d_L+0.095{dimensionless}*d_L_infinity)*(V-E_Ca_L);
  enddef;

  def comp L_type_Ca_channel_d_gate as
    var d_L: dimensionless {init: 0.002572773, pub: out};
    var d_L_infinity: dimensionless {pub: out};
    var alpha_d_L: per_second;
    var beta_d_L: per_second;
    var tau_d_L: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_d_L = -28.39{per_millivolt_second}*(V+35{millivolt})/(exp((V+35{millivolt})/(-2.5{millivolt}))-1{dimensionless})+(-84.9{per_millivolt_second}*V/(exp(-0.208{per_millivolt}*V)-1{dimensionless}));
    beta_d_L = 11.43{per_millivolt_second}*(V-5{millivolt})/(exp(0.4{per_millivolt}*(V-5{millivolt}))-1{dimensionless});
    tau_d_L = 1{dimensionless}/(alpha_d_L+beta_d_L);
    d_L_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+14.1{millivolt})/(-6{millivolt})));
    ode(d_L, time) = (d_L_infinity-d_L)/tau_d_L;
  enddef;

  def comp L_type_Ca_channel_f_gate as
    var f_L: dimensionless {init: 0.98651, pub: out};
    var alpha_f_L: per_second;
    var beta_f_L: per_second;
    var f_L_infinity: dimensionless;
    var tau_f_L: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_f_L = 3.75{per_millivolt_second}*(V+28{millivolt})/(exp((V+28{millivolt})/4{millivolt})-1{dimensionless});
    beta_f_L = 30{per_second}/(1{dimensionless}+exp((V+28{millivolt})/(-4{millivolt})));
    tau_f_L = 1{dimensionless}/(alpha_f_L+beta_f_L);
    f_L_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+30{millivolt})/5{millivolt}));
    ode(f_L, time) = (f_L_infinity-f_L)/tau_f_L;
  enddef;

  def comp T_type_Ca_channel as
    var i_Ca_T: nanoA {pub: out};
    var g_Ca_T: microS {init: 0.02521};
    var E_Ca_T: millivolt {init: 45};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var d_T: dimensionless {priv: in};
    var f_T: dimensionless {priv: in};
    i_Ca_T = g_Ca_T*d_T*f_T*(V-E_Ca_T);
  enddef;

  def comp T_type_Ca_channel_d_gate as
    var d_T: dimensionless {init: 0.02012114, pub: out};
    var alpha_d_T: per_second;
    var beta_d_T: per_second;
    var d_T_infinity: dimensionless;
    var tau_d_T: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_d_T = 1068{per_second}*exp((V+26.3{millivolt})/30{millivolt});
    beta_d_T = 1068{per_second}*exp((V+26.3{millivolt})/(-30{millivolt}));
    tau_d_T = 1{dimensionless}/(alpha_d_T+beta_d_T);
    d_T_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+26.3{millivolt})/(-6{millivolt})));
    ode(d_T, time) = (d_T_infinity-d_T)/tau_d_T;
  enddef;

  def comp T_type_Ca_channel_f_gate as
    var f_T: dimensionless {init: 0.1945111, pub: out};
    var alpha_f_T: per_second;
    var beta_f_T: per_second;
    var f_T_infinity: dimensionless;
    var tau_f_T: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_f_T = 15.3{per_second}*exp((V+61.7{millivolt})/(-83.3{millivolt}));
    beta_f_T = 15{per_second}*exp((V+61.7{millivolt})/15.38{millivolt});
    tau_f_T = 1{dimensionless}/(alpha_f_T+beta_f_T);
    f_T_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+61.7{millivolt})/5.6{millivolt}));
    ode(f_T, time) = (f_T_infinity-f_T)/tau_f_T;
  enddef;

  def comp delayed_rectifying_potassium_current as
    var i_K: nanoA {pub: out};
    var g_K: microS;
    var F_cAMP_K: dimensionless;
    var cAMP: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var K_b: millimolar {pub: in};
    var P_a: dimensionless {priv: in};
    var P_i: dimensionless {priv: in};
    F_cAMP_K = 0.62{dimensionless}*(1{dimensionless}+2.6129{dimensionless}*cAMP/(cAMP+9e-3{millimolar}))-0.025{dimensionless};
    g_K = F_cAMP_K*0.00693{microS}*pow(K_b/1{millimolar}, 0.59{dimensionless});
    i_K = g_K*P_a*P_i*(V-E_K);
  enddef;

  def comp delayed_rectifying_potassium_current_P_a_gate as
    var P_a: dimensionless {init: 0.02302278, pub: out};
    var tau_P_a: second;
    var P_a_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    P_a_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+5.1{millivolt})/(-7.4{millivolt})));
    tau_P_a = 1{dimensionless}/(17{per_second}*exp(0.0398{per_millivolt}*V)+2.11{per_second}*exp(-0.051{per_millivolt}*V));
    ode(P_a, time) = (P_a_infinity-P_a)/tau_P_a;
  enddef;

  def comp delayed_rectifying_potassium_current_P_i_gate as
    var P_i: dimensionless {init: 0.3777728, pub: out};
    var alpha_P_i: per_second;
    var beta_P_i: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_P_i = 100{per_second}*exp(-0.0183{per_millivolt}*V);
    beta_P_i = 656{per_second}*exp(0.00942{per_millivolt}*V);
    ode(P_i, time) = alpha_P_i*(1{dimensionless}-P_i)-beta_P_i*P_i;
  enddef;

  def comp linear_background_current as
    var i_B: nanoA {pub: out};
    var i_B_Na: nanoA {pub: out};
    var i_B_Ca: nanoA {pub: out};
    var i_B_K: nanoA {pub: out};
    var g_B_Na: microS {init: 0.00016};
    var g_B_Ca: microS {init: 0.0000364};
    var g_B_K: microS {init: 0.0000694};
    var E_Na: millivolt {pub: in};
    var E_Ca: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var F_ACh_bNa: dimensionless;
    var ACh: millimolar {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    F_ACh_bNa = 1{dimensionless}-ACh/(ACh+5e-1{millimolar});
    i_B_Na = F_ACh_bNa*g_B_Na*(V-E_Na);
    i_B_Ca = g_B_Ca*(V-E_Ca);
    i_B_K = g_B_K*(V-E_K);
    i_B = i_B_Na+i_B_Ca+i_B_K;
  enddef;

  def comp hyperpolarisation_activated_current as
    var i_f: nanoA {pub: out};
    var i_f_Na: nanoA {pub: out};
    var i_f_K: nanoA {pub: out};
    var g_f_Na: microS {init: 0.0067478};
    var g_f_K: microS {init: 0.0128821};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var cAMP: millimolar {priv: out, pub: in};
    var y: dimensionless {priv: in};
    i_f_Na = g_f_Na*sqr(y)*(V-75{millivolt});
    i_f_K = g_f_K*sqr(y)*(V+85{millivolt});
    i_f = i_f_Na+i_f_K;
  enddef;

  def comp hyperpolarisation_activated_current_y_gate as
    var y: dimensionless {init: 0.09227776, pub: out};
    var y_infinity: dimensionless;
    var V_half: millivolt;
    var cAMP: millimolar {pub: in};
    var tau_y: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    V_half = 20.5{millivolt}/(1{dimensionless}+exp((cAMP-3.4e-3{millimolar})/(-5e-4{millimolar})))-78.56{millivolt};
    y_infinity = 1{dimensionless}/(1{dimensionless}+exp((V-V_half)/9{millivolt}));
    tau_y = 1{second}/(1.6483{dimensionless}*exp((V+54.06{millivolt})/(-24.33{millivolt}))+14.01055{dimensionless}/(0.7{dimensionless}+exp((V+60{millivolt})/(-5.5{millivolt}))));
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: nanoA {pub: out};
    var K_m_Na: millimolar {init: 5.46};
    var K_m_K: millimolar {init: 0.621};
    var i_NaK_max: nanoA {init: 0.2192};
    var F_cAMP_NaK: dimensionless;
    var cAMP: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var K_c: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    F_cAMP_NaK = 1.6{dimensionless}/(1{dimensionless}+exp((cAMP-3.75e-3{millimolar})/(-1.5e-4{millimolar})))+0.99{dimensionless};
    i_NaK = sel
      case Ca_i < 0.00015{millimolar}:
        (2{dimensionless}-F_cAMP_NaK)*i_NaK_max*pow(Na_i/(K_m_Na+Na_i), 3{dimensionless})*sqr(K_c/(K_m_K+K_c))*1.6{dimensionless}/(1.5{dimensionless}+exp((V+60{millivolt})/(-40{millivolt})));
      otherwise:
        F_cAMP_NaK*i_NaK_max*pow(Na_i/(K_m_Na+Na_i), 3{dimensionless})*sqr(K_c/(K_m_K+K_c))*1.6{dimensionless}/(1.5{dimensionless}+exp((V+60{millivolt})/(-40{millivolt})));
    endsel;
  enddef;

  def comp calcium_pump_current as
    var i_Ca_P: nanoA {pub: out};
    var i_Ca_P_max: nanoA {init: 0.02869};
    var Ca_i: millimolar {pub: in};
    var time: second {pub: in};
    i_Ca_P = i_Ca_P_max*Ca_i/(Ca_i+0.0004{millimolar});
  enddef;

  def comp sodium_calcium_pump as
    var i_NaCa: nanoA {pub: out};
    var K_NaCa: nanoA {init: 0.00001248};
    var d_NaCa: dimensionless {init: 0.0001};
    var gamma: dimensionless {init: 0.5};
    var Na_i: millimolar {pub: in};
    var Na_c: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_c: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_NaCa = K_NaCa*(pow(Na_i, 3{dimensionless})*Ca_c*exp(0.03743{per_millivolt}*V*gamma)-pow(Na_c, 3{dimensionless})*Ca_i*exp(0.03743{per_millivolt}*V*(gamma-1{dimensionless})))/(1{millimolar_4}+d_NaCa*(Ca_i*pow(Na_c, 3{dimensionless})+Ca_c*pow(Na_i, 3{dimensionless})));
  enddef;

  def comp muscarinic_potassium_current as
    var i_K_ACh: nanoA {pub: out};
    var I_K_ACh: nanoA;
    var ACh: millimolar {pub: in};
    var g_K_ACh: microS;
    var g_K_ACh_base: microS {init: 7.833e-3};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var P_M2_KACh: dimensionless;
    var a: dimensionless {init: 0};
    var alpha_a: per_second;
    var beta_a: per_second;
    var f_Vagal: per_second {pub: in};
    var time: second {pub: in};
    i_K_ACh = a*I_K_ACh;
    ode(a, time) = beta_a*(1{dimensionless}-a)-alpha_a*a;
    beta_a = 12.32{per_second}/(1{dimensionless}+0.0042{millimolar}/ACh);
    alpha_a = 17{per_second}*exp(0.0133{per_millivolt}*(V+40{millivolt}));
    I_K_ACh = g_K_ACh*(V-E_K);
    g_K_ACh = P_M2_KACh*g_K_ACh_base;
    P_M2_KACh = sel
      case (f_Vagal < 100{per_second}) and (f_Vagal > 25{per_second}):
        1.026{dimensionless}/(1{dimensionless}+exp((f_Vagal+11.05{per_second})/(-7.5095{per_second})))-0.99{dimensionless};
      otherwise:
        0.0006{dimensionless};
    endsel;
  enddef;

  def comp intracellular_concentrations_and_buffer_equations as
    var Na_i: millimolar {init: 9.701621, pub: out};
    var Ca_i: millimolar {init: 3.787018e-4, pub: out};
    var K_i: millimolar {init: 1.407347e2, pub: out};
    var Ca_Calmod: dimensionless {init: 0.1411678};
    var Ca_Trop: dimensionless {init: 0.07331396};
    var Ca_Mg_Trop: dimensionless {init: 0.7618549};
    var Mg_Mg_Trop: dimensionless {init: 0.2097049};
    var phi_C: per_second;
    var phi_TC: per_second;
    var phi_TMgC: per_second;
    var phi_TMgM: per_second;
    var phi_B: millimolar_per_second;
    var Mg_i: millimolar {init: 2.5};
    var F_C: millimolar_per_second;
    var F_TC: millimolar_per_second;
    var F_TMgC: millimolar_per_second;
    var Vol: mm_cubed {pub: in};
    var V_i: mm_cubed {pub: out};
    var i_NaK: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_B_Na: nanoA {pub: in};
    var i_f_Na: nanoA {pub: in};
    var i_Na: nanoA {pub: in};
    var i_K: nanoA {pub: in};
    var i_B_K: nanoA {pub: in};
    var i_f_K: nanoA {pub: in};
    var i_Ca_L: nanoA {pub: in};
    var i_Ca_T: nanoA {pub: in};
    var i_Ca_P: nanoA {pub: in};
    var i_B_Ca: nanoA {pub: in};
    var i_up: nanoA {pub: in};
    var i_rel: nanoA {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    V_i = 0.465{dimensionless}*Vol;
    phi_C = 129000{per_millimolar_second}*Ca_i*(1{dimensionless}-Ca_Calmod)-307{per_second}*Ca_Calmod;
    ode(Ca_Calmod, time) = phi_C;
    phi_TC = 50500{per_millimolar_second}*Ca_i*(1{dimensionless}-Ca_Trop)-252{per_second}*Ca_Trop;
    ode(Ca_Trop, time) = phi_TC;
    phi_TMgC = 129000{per_millimolar_second}*Ca_i*(1{dimensionless}-(Ca_Mg_Trop+Mg_Mg_Trop))-4.25{per_second}*Ca_Mg_Trop;
    ode(Ca_Mg_Trop, time) = phi_TMgC;
    phi_TMgM = 1290{per_millimolar_second}*Mg_i*(1{dimensionless}-(Ca_Mg_Trop+Mg_Mg_Trop))-429{per_second}*Mg_Mg_Trop;
    ode(Mg_Mg_Trop, time) = phi_TMgM;
    F_C = 0.09{millimolar}*phi_C;
    F_TC = 0.031{millimolar}*phi_TC;
    F_TMgC = 0.062{millimolar}*phi_TMgC;
    phi_B = F_C+F_TC+F_TMgC;
    ode(Na_i, time) = -(3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa+i_B_Na+i_f_Na+i_Na)/(F*V_i);
    ode(K_i, time) = (2{dimensionless}*i_NaK-(i_K+i_f_K+i_B_K))/(F*V_i);
    ode(Ca_i, time) = (2{dimensionless}*i_NaCa+i_rel-(i_Ca_L+i_Ca_T+i_Ca_P+i_B_Ca+i_up))/(2{dimensionless}*V_i*F)-phi_B;
  enddef;

  def comp cleft_space_equations as
    var Na_c: millimolar {init: 139.9988, pub: out};
    var Ca_c: millimolar {init: 2.00474, pub: out};
    var K_c: millimolar {init: 5.389014, pub: out};
    var K_b: millimolar {init: 5.4, pub: out};
    var Na_b: millimolar {init: 140};
    var Ca_b: millimolar {init: 2};
    var Vol: mm_cubed {init: 3.497e-6, pub: out};
    var V_c: mm_cubed;
    var tau_p: second {init: 0.01};
    var i_NaK: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_B_Na: nanoA {pub: in};
    var i_f_Na: nanoA {pub: in};
    var i_Na: nanoA {pub: in};
    var i_K: nanoA {pub: in};
    var i_B_K: nanoA {pub: in};
    var i_f_K: nanoA {pub: in};
    var i_Ca_L: nanoA {pub: in};
    var i_Ca_T: nanoA {pub: in};
    var i_Ca_P: nanoA {pub: in};
    var i_B_Ca: nanoA {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    V_c = 0.136{dimensionless}*Vol;
    ode(Na_c, time) = (Na_b-Na_c)/tau_p+(i_Na+3{dimensionless}*i_NaCa+3{dimensionless}*i_NaK+i_B_Na+i_f_Na)/(F*V_c);
    ode(K_c, time) = (K_b-K_c)/tau_p+(-2{dimensionless}*i_NaK+i_K+i_B_K+i_f_K)/(F*V_c);
    ode(Ca_c, time) = (Ca_b-Ca_c)/tau_p+(-2{dimensionless}*i_NaCa+i_Ca_L+i_Ca_T+i_Ca_P+i_B_Ca)/(2{dimensionless}*F*V_c);
  enddef;

  def comp SR_Ca_uptake_and_release as
    var i_rel: nanoA {pub: out};
    var i_up: nanoA {pub: out};
    var Ca_up: millimolar {init: 16.95311};
    var alpha_up: nanoA {init: 0.08};
    var beta_up: nanoA {init: 0.072};
    var Ca_rel: millimolar {init: 16.85024};
    var alpha_rel: nanoA_per_millimolar {init: 0.5};
    var i_tr: nanoA;
    var K1: dimensionless;
    var K2: millimolar;
    var k_cyca: millimolar {init: 0.00005};
    var k_xcs: dimensionless {init: 0.9};
    var k_SRCa: millimolar {init: 22};
    var k_rel: millimolar {init: 0.004};
    var r_act: per_second;
    var r_inact: per_second;
    var Ca_Calse: dimensionless {init: 0.9528726};
    var phi_Calse: per_second;
    var F1: dimensionless {init: 0.1133251};
    var F2: dimensionless {init: 0.0007594214};
    var F3: dimensionless {init: 0.8859153};
    var V_i: mm_cubed {pub: in};
    var V_up: mm_cubed;
    var V_rel: mm_cubed;
    var Ca_i: millimolar {pub: in};
    var F: coulomb_per_mole {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    V_up = 0.01166{dimensionless}*V_i;
    V_rel = 0.001296{dimensionless}*V_i;
    K1 = k_cyca*k_xcs/k_SRCa;
    K2 = Ca_i+Ca_up*K1+k_cyca*k_xcs+k_cyca;
    r_act = 240{per_second}*exp((V-40{millivolt})*0.08{per_millivolt})+240{per_second}*pow(Ca_i/(Ca_i+k_rel), 4{dimensionless});
    r_inact = 40{per_second}+240{per_second}*pow(Ca_i/(Ca_i+k_rel), 4{dimensionless});
    phi_Calse = 770{per_millimolar_second}*Ca_rel*(1{dimensionless}-Ca_Calse)-641{per_second}*Ca_Calse;
    ode(Ca_Calse, time) = phi_Calse;
    ode(F1, time) = 0.96{per_second}*F3-r_act*F1;
    ode(F2, time) = r_act*F1-r_inact*F2;
    ode(F3, time) = r_inact*F2-0.96{per_second}*F3;
    i_rel = alpha_rel*sqr(F2/(F2+0.25{dimensionless}))*Ca_rel;
    i_tr = (Ca_up-Ca_rel)*2{dimensionless}*F*V_up/0.06418{second};
    i_up = (alpha_up*Ca_i-beta_up*Ca_up*K1)/K2;
    ode(Ca_up, time) = (i_up-i_tr)/(2{dimensionless}*V_up*F);
    ode(Ca_rel, time) = (i_tr-i_rel)/(2{dimensionless}*V_rel*F)-11.48{millimolar}*phi_Calse;
  enddef;

  def comp reversal_potentials as
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    var K_c: millimolar {pub: in};
    var Na_c: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_c: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    E_Na = R*T/F*ln(Na_c/Na_i);
    E_K = R*T/F*ln(K_c/K_i);
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Ca_c/Ca_i);
  enddef;

  def comp cAMP_balance as
    var cAMP: millimolar {init: 3e-3, pub: out};
    var cGMP: millimolar {init: 2e-3};
    var Iso: millimolar {init: 0};
    var ACh: millimolar {init: 0, pub: out};
    var Km_Iso: millimolar {init: 0.14e-3};
    var Km_ACh: millimolar {init: 0.14e-3};
    var K_PDE: dimensionless {init: 6};
    var K_ADC: millimolar_per_second {init: 8e-3};
    var V_PDE: per_second {init: 20};
    var P_M2_ADC: dimensionless {init: 0.02};
    var time: second {pub: in};
    var f_Vagal: per_second {init: 200, pub: out};
    ode(cAMP, time) = 1{dimensionless}*(K_ADC*(1{dimensionless}+Iso/(Iso+Km_Iso)-P_M2_ADC*ACh/(P_M2_ADC*ACh+Km_ACh))-V_PDE*cGMP*cAMP/(cAMP+K_PDE*cGMP));
  enddef;

  def group as containment for
    comp membrane incl
      comp sodium_current incl
        comp sodium_current_m_gate;
        comp sodium_current_h_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_gate;
        comp L_type_Ca_channel_f_gate;
      endcomp;
      comp T_type_Ca_channel incl
        comp T_type_Ca_channel_d_gate;
        comp T_type_Ca_channel_f_gate;
      endcomp;
      comp delayed_rectifying_potassium_current incl
        comp delayed_rectifying_potassium_current_P_a_gate;
        comp delayed_rectifying_potassium_current_P_i_gate;
      endcomp;
      comp linear_background_current;
      comp hyperpolarisation_activated_current incl
        comp hyperpolarisation_activated_current_y_gate;
      endcomp;
      comp sodium_potassium_pump;
      comp calcium_pump_current;
      comp sodium_calcium_pump;
      comp muscarinic_potassium_current;
      comp intracellular_concentrations_and_buffer_equations;
      comp cleft_space_equations;
      comp SR_Ca_uptake_and_release;
      comp reversal_potentials;
      comp cAMP_balance;
    endcomp;
  enddef;

  def group as encapsulation for
    comp sodium_current incl
      comp sodium_current_m_gate;
      comp sodium_current_h_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
    endcomp;
    comp T_type_Ca_channel incl
      comp T_type_Ca_channel_d_gate;
      comp T_type_Ca_channel_f_gate;
    endcomp;
    comp delayed_rectifying_potassium_current incl
      comp delayed_rectifying_potassium_current_P_a_gate;
      comp delayed_rectifying_potassium_current_P_i_gate;
    endcomp;
    comp hyperpolarisation_activated_current incl
      comp hyperpolarisation_activated_current_y_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between delayed_rectifying_potassium_current and environment for
    vars time and time;
  enddef;
  def map between linear_background_current and environment for
    vars time and time;
  enddef;
  def map between hyperpolarisation_activated_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between calcium_pump_current and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between muscarinic_potassium_current and environment for
    vars time and time;
  enddef;
  def map between intracellular_concentrations_and_buffer_equations and environment for
    vars time and time;
  enddef;
  def map between cleft_space_equations and environment for
    vars time and time;
  enddef;
  def map between SR_Ca_uptake_and_release and environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and environment for
    vars time and time;
  enddef;
  def map between cAMP_balance and environment for
    vars time and time;
  enddef;
  def map between membrane and sodium_current for
    vars i_Na and i_Na;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars i_Ca_L and i_Ca_L;
    vars V and V;
  enddef;
  def map between membrane and T_type_Ca_channel for
    vars i_Ca_T and i_Ca_T;
    vars V and V;
  enddef;
  def map between membrane and delayed_rectifying_potassium_current for
    vars i_K and i_K;
    vars V and V;
  enddef;
  def map between membrane and linear_background_current for
    vars V and V;
    vars i_B and i_B;
  enddef;
  def map between membrane and hyperpolarisation_activated_current for
    vars i_f and i_f;
    vars V and V;
  enddef;
  def map between calcium_pump_current and membrane for
    vars i_Ca_P and i_Ca_P;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars i_NaK and i_NaK;
    vars V and V;
  enddef;
  def map between membrane and sodium_calcium_pump for
    vars i_NaCa and i_NaCa;
    vars V and V;
  enddef;
  def map between muscarinic_potassium_current and membrane for
    vars V and V;
    vars i_K_ACh and i_K_ACh;
  enddef;
  def map between membrane and intracellular_concentrations_and_buffer_equations for
    vars F and F;
  enddef;
  def map between membrane and cleft_space_equations for
    vars F and F;
  enddef;
  def map between membrane and SR_Ca_uptake_and_release for
    vars F and F;
    vars V and V;
  enddef;
  def map between membrane and reversal_potentials for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between reversal_potentials and sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between intracellular_concentrations_and_buffer_equations and sodium_current for
    vars i_Na and i_Na;
  enddef;
  def map between cleft_space_equations and sodium_current for
    vars i_Na and i_Na;
    vars Na_c and Na_c;
  enddef;
  def map between L_type_Ca_channel and cleft_space_equations for
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between L_type_Ca_channel and intracellular_concentrations_and_buffer_equations for
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between T_type_Ca_channel and cleft_space_equations for
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between T_type_Ca_channel and intracellular_concentrations_and_buffer_equations for
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between cleft_space_equations and delayed_rectifying_potassium_current for
    vars i_K and i_K;
    vars K_b and K_b;
  enddef;
  def map between intracellular_concentrations_and_buffer_equations and delayed_rectifying_potassium_current for
    vars i_K and i_K;
  enddef;
  def map between reversal_potentials and delayed_rectifying_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and linear_background_current for
    vars E_Na and E_Na;
    vars E_Ca and E_Ca;
    vars E_K and E_K;
  enddef;
  def map between muscarinic_potassium_current and reversal_potentials for
    vars E_K and E_K;
  enddef;
  def map between cleft_space_equations and linear_background_current for
    vars i_B_Na and i_B_Na;
    vars i_B_Ca and i_B_Ca;
    vars i_B_K and i_B_K;
  enddef;
  def map between intracellular_concentrations_and_buffer_equations and linear_background_current for
    vars i_B_Na and i_B_Na;
    vars i_B_Ca and i_B_Ca;
    vars i_B_K and i_B_K;
  enddef;
  def map between intracellular_concentrations_and_buffer_equations and hyperpolarisation_activated_current for
    vars i_f_K and i_f_K;
    vars i_f_Na and i_f_Na;
  enddef;
  def map between cleft_space_equations and hyperpolarisation_activated_current for
    vars i_f_K and i_f_K;
    vars i_f_Na and i_f_Na;
  enddef;
  def map between sodium_potassium_pump and intracellular_concentrations_and_buffer_equations for
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
    vars i_NaK and i_NaK;
  enddef;
  def map between sodium_potassium_pump and cleft_space_equations for
    vars K_c and K_c;
    vars i_NaK and i_NaK;
  enddef;
  def map between calcium_pump_current and cleft_space_equations for
    vars i_Ca_P and i_Ca_P;
  enddef;
  def map between calcium_pump_current and intracellular_concentrations_and_buffer_equations for
    vars i_Ca_P and i_Ca_P;
    vars Ca_i and Ca_i;
  enddef;
  def map between sodium_calcium_pump and intracellular_concentrations_and_buffer_equations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between sodium_calcium_pump and cleft_space_equations for
    vars Ca_c and Ca_c;
    vars Na_c and Na_c;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between reversal_potentials and intracellular_concentrations_and_buffer_equations for
    vars K_i and K_i;
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
  enddef;
  def map between reversal_potentials and cleft_space_equations for
    vars K_c and K_c;
    vars Na_c and Na_c;
    vars Ca_c and Ca_c;
  enddef;
  def map between intracellular_concentrations_and_buffer_equations and cleft_space_equations for
    vars Vol and Vol;
  enddef;
  def map between intracellular_concentrations_and_buffer_equations and SR_Ca_uptake_and_release for
    vars i_rel and i_rel;
    vars i_up and i_up;
    vars Ca_i and Ca_i;
    vars V_i and V_i;
  enddef;
  def map between sodium_current and sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_h_gate for
    vars h1 and h1;
    vars h2 and h2;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d_L and d_L;
    vars d_L_infinity and d_L_infinity;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f_L and f_L;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_d_gate for
    vars d_T and d_T;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_f_gate for
    vars f_T and f_T;
    vars time and time;
    vars V and V;
  enddef;
  def map between delayed_rectifying_potassium_current and delayed_rectifying_potassium_current_P_a_gate for
    vars P_a and P_a;
    vars time and time;
    vars V and V;
  enddef;
  def map between delayed_rectifying_potassium_current and delayed_rectifying_potassium_current_P_i_gate for
    vars P_i and P_i;
    vars time and time;
    vars V and V;
  enddef;
  def map between hyperpolarisation_activated_current and hyperpolarisation_activated_current_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
    vars cAMP and cAMP;
  enddef;
  def map between L_type_Ca_channel and cAMP_balance for
    vars cAMP and cAMP;
  enddef;
  def map between delayed_rectifying_potassium_current and cAMP_balance for
    vars cAMP and cAMP;
  enddef;
  def map between hyperpolarisation_activated_current and cAMP_balance for
    vars cAMP and cAMP;
  enddef;
  def map between sodium_potassium_pump and cAMP_balance for
    vars cAMP and cAMP;
  enddef;
  def map between muscarinic_potassium_current and cAMP_balance for
    vars ACh and ACh;
    vars f_Vagal and f_Vagal;
  enddef;
  def map between sodium_current and cAMP_balance for
    vars ACh and ACh;
  enddef;
  def map between linear_background_current and cAMP_balance for
    vars ACh and ACh;
  enddef;
enddef;
// #ACh_sensitive_K_current
// comment: ACh has a direct stimulatory affect on the ACh-sensitive potassium channel. The G-protein-mediated, direct affect of ACh on i_K_ACh occurs via the extrajunctional M2/K_ACh muscarinic receptor. This channel has a single gating variable a.
// rdf:#4c84c820-8495-42b7-97e6-e3570cc58a74
// value: The effects of ACh and Iso on i_Ca_L and i_K are produced indirectly via the cAMP-dependent modulation of L-type Ca2+ and K+ channel conductance (g_Ca_L and g_K) respectively.
// #sodium_potassium_pump
// comment: The effects of Iso on i_NaK may be species dependent as it has been observed that Iso directly stimulates Na+-K+-ATPase activity in rabbit ventricular myocytes (Desilets and Baumgarten, 1986), but indirectly stimulates i_NaK in guinea pig ventricular myocytes via a PKA phosphorylation step (Gao et al. 1992, 1994). In the absence of any quantitative evidence, in this model Demir et al. have assumed that cAMP directly stimulates i_NaK in the rabbit SAN cell and that this cAMP dependency may be modelled by the equations below.
// rdf:#d2719631-8fd3-4cc7-8124-48eb39dc8215
// value: i_f is modulated via a direct effect of cAMP on the voltage-dependence of its steady-state activation variable y.
// #T_type_Ca_channel
// comment: The T-type calcium channel has two gates, an activation gate d_T and an inactivation gate f_T.
