<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="fujita_2010" name="fujita_2010">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Decoupling of receptor and downstream signals in the Akt pathway by its low-pass filter characteristics</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
        This CellML represents the EGFR-inhibited Akt Pathway model from the original publication (EGF has been set to 30 and the inhibitor to 15).  The model runs in both COR and OpenCell to replicate the published results.  The units have been checked and they are consistent.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: In cellular signal transduction, the information in an external stimulus is encoded in temporal patterns in the activities of signaling molecules; for example, pulses of a stimulus may produce an increasing response or may produce pulsatile responses in the signaling molecules. Here, we show how the Akt pathway, which is involved in cell growth, specifically transmits temporal information contained in upstream signals to downstream effectors. We modeled the epidermal growth factor (EGF)-dependent Akt pathway in PC12 cells on the basis of experimental results. We obtained counterintuitive results indicating that the sizes of the peak amplitudes of receptor and downstream effector phosphorylation were decoupled; weak, sustained EGF receptor (EGFR) phosphorylation, rather than strong, transient phosphorylation, strongly induced phosphorylation of the ribosomal protein S6, a molecule downstream of Akt. Using frequency response analysis, we found that a three-component Akt pathway exhibited the property of a low-pass filter and that this property could explain decoupling of the peak amplitudes of receptor phosphorylation and that of downstream effectors. Furthermore, we found that lapatinib, an EGFR inhibitor used as an anticancer drug, converted strong, transient Akt phosphorylation into weak, sustained Akt phosphorylation, and, because of the low-pass filter characteristics of the Akt pathway, this led to stronger S6 phosphorylation than occurred in the absence of the inhibitor. Thus, an EGFR inhibitor can potentially act as a downstream activator of some effectors.
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="fujita_2010c.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram of the simple simulation model of the EGFR-inhibited Akt pathway.</caption>
</informalfigure>

<para>
The original paper reference is cited below:
</para>

<para>
Decoupling of receptor and downstream signals in the Akt pathway by its low-pass filter characteristics, Fujita KA, Toyoshima Y, Uda S, Ozaki Y, Kubota H, and Kuroda S, 2009, <emphasis>Science Signaling</emphasis>, 3, issue 132.  <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/20664065">PubMed ID: 20664065</ulink></para>

</sect1>
</article>
</documentation> 



  <units name="first_order_rate_constant">
    <unit exponent="-1" units="second"/>
  </units>

  
  <component name="environment">
    <variable cmeta:id="environment_time" name="time" public_interface="out" units="second"/>
  </component>
  
  <component name="EGF">
    <variable cmeta:id="EGF_EGF" initial_value="30.0" name="EGF" public_interface="out" units="dimensionless"/>
  </component>
  
  <component name="inhibitor">
    <variable cmeta:id="inhibitor_inhibitor" initial_value="15.0" name="inhibitor" public_interface="out" units="dimensionless"/>
  </component>
  
  <component name="pro_EGFR">
    <variable cmeta:id="pro_EGFR_pro_EGFR" initial_value="6.81902e-4" name="pro_EGFR" public_interface="out" units="dimensionless"/>
  </component>
  
  <component name="EGFR">
    <variable cmeta:id="EGFR_EGFR" initial_value="68190.000000002" name="EGFR" public_interface="out" units="dimensionless"/>
    
	<variable name="EGF_EGFR" public_interface="in" units="dimensionless"/>
	<variable name="EGF" public_interface="in" units="dimensionless"/>
	<variable name="pro_EGFR" public_interface="in" units="dimensionless"/>
	<variable name="inhibitor" public_interface="in" units="dimensionless"/>
	<variable name="EGFR_i" public_interface="in" units="dimensionless"/>
	<variable name="EGF_binding_kb" public_interface="in" units="first_order_rate_constant"/>
	<variable name="EGF_binding_kf" public_interface="in" units="first_order_rate_constant"/>
	<variable name="inhibitor_binding_kb" public_interface="in" units="first_order_rate_constant"/>
	<variable name="inhibitor_binding_kf" public_interface="in" units="first_order_rate_constant"/>
	<variable name="EGFR_turnover" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> EGFR </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> EGF_binding_kb </ci>
              <ci> EGF_EGFR </ci>
			</apply>
			<apply>
              <times/>
			  <ci> inhibitor_binding_kb </ci>
              <ci> EGFR_i </ci>
			</apply>
			<apply>
              <times/>
			  <ci> EGFR_turnover </ci>
			  <apply>
                <minus/>
				<ci> pro_EGFR </ci>
                <ci> EGFR </ci>
			  </apply>
			</apply>
          </apply>
		  <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> EGF_binding_kf </ci> 
			  <ci> EGF </ci>
		      <ci> EGFR </ci>
            </apply>
			<apply>
              <times/>
			  <ci> inhibitor_binding_kf </ci> 
			  <ci> inhibitor </ci>
		      <ci> EGFR </ci>
            </apply>
		  </apply>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="EGF_EGFR">
    <variable cmeta:id="EGF_EGFR_EGF_EGFR" initial_value="0.0" name="EGF_EGFR" public_interface="out" units="dimensionless"/>
    
	<variable name="EGFR" public_interface="in" units="dimensionless"/>
	<variable name="EGF" public_interface="in" units="dimensionless"/>
	<variable name="inhibitor" public_interface="in" units="dimensionless"/>
	<variable name="EGF_EGFR_i" public_interface="in" units="dimensionless"/>
	<variable name="EGF_binding_kb" public_interface="in" units="first_order_rate_constant"/>
	<variable name="EGF_binding_kf" public_interface="in" units="first_order_rate_constant"/>
	<variable name="inhibitor_binding_kb" public_interface="in" units="first_order_rate_constant"/>
	<variable name="inhibitor_binding_kf" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_EGFR_phosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> EGF_EGFR </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> EGF_binding_kf </ci> 
			  <ci> EGF </ci>
		      <ci> EGFR </ci>
            </apply>
			<apply>
              <times/>
			  <ci> inhibitor_binding_kb </ci> 
			  <ci> EGF_EGFR_i </ci>
            </apply>
		  </apply>
		  <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> EGF_binding_kb </ci>
              <ci> EGF_EGFR </ci>
			</apply>
			<apply>
              <times/>
			  <ci> inhibitor_binding_kf </ci> 
			  <ci> inhibitor </ci>
		      <ci> EGF_EGFR </ci>
            </apply>
			<apply>
              <times/>
			  <ci> k1_EGFR_phosphorylation </ci>
			  <ci> EGF_EGFR </ci>
			</apply>
		  </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="EGFR_i">
    <variable cmeta:id="EGFR_i_EGFR_i" initial_value="0.0" name="EGFR_i" public_interface="out" units="dimensionless"/>
    
	<variable name="EGF_EGFR_i" public_interface="in" units="dimensionless"/>
	<variable name="EGF" public_interface="in" units="dimensionless"/>
	<variable name="EGFR" public_interface="in" units="dimensionless"/>
	<variable name="inhibitor" public_interface="in" units="dimensionless"/>
	<variable name="EGF_binding_kb" public_interface="in" units="first_order_rate_constant"/>
	<variable name="EGF_binding_kf" public_interface="in" units="first_order_rate_constant"/>
	<variable name="inhibitor_binding_kb" public_interface="in" units="first_order_rate_constant"/>
	<variable name="inhibitor_binding_kf" public_interface="in" units="first_order_rate_constant"/>
	<variable name="EGFR_turnover" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> EGFR_i </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> EGF_binding_kb </ci> 
			  <ci> EGF_EGFR_i </ci>
		    </apply>
			<apply>
              <times/>
			  <ci> inhibitor_binding_kf </ci> 
			  <ci> inhibitor </ci>
		      <ci> EGFR </ci>
            </apply>
		  </apply>
		  <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> EGF_binding_kf </ci>
              <ci> EGF </ci>
			  <ci> EGFR_i </ci>
			</apply>
			<apply>
              <times/>
			  <ci> inhibitor_binding_kb </ci>
              <ci> EGFR_i </ci>
			</apply>
			<apply>
              <times/>
			  <ci> EGFR_turnover </ci>
			  <ci> EGFR_i </ci>
			</apply>
          </apply> 
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="EGF_EGFR_i">
    <variable cmeta:id="EGF_EGFR_i_EGF_EGFR_i" initial_value="0.0" name="EGF_EGFR_i" public_interface="out" units="dimensionless"/>
    
	<variable name="EGFR_i" public_interface="in" units="dimensionless"/>
	<variable name="EGF" public_interface="in" units="dimensionless"/>
	<variable name="EGF_EGFR" public_interface="in" units="dimensionless"/>
	<variable name="inhibitor" public_interface="in" units="dimensionless"/>
	<variable name="EGF_binding_kb" public_interface="in" units="first_order_rate_constant"/>
	<variable name="EGF_binding_kf" public_interface="in" units="first_order_rate_constant"/>
	<variable name="inhibitor_binding_kb" public_interface="in" units="first_order_rate_constant"/>
	<variable name="inhibitor_binding_kf" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> EGF_EGFR_i </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> EGF_binding_kf </ci> 
			  <ci> EGF </ci>
			  <ci> EGFR_i </ci>
		    </apply>
			<apply>
              <times/>
			  <ci> inhibitor_binding_kf </ci> 
			  <ci> inhibitor </ci>
		      <ci> EGF_EGFR </ci>
            </apply>
		  </apply>
		  <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> EGF_binding_kb </ci>
              <ci> EGF_EGFR_i </ci>
			</apply>
			<apply>
              <times/>
			  <ci> inhibitor_binding_kb </ci>
              <ci> EGF_EGFR_i </ci>
			</apply>
		  </apply> 
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="pEGFR">
    <variable cmeta:id="pEGFR_pEGFR" initial_value="0.0" name="pEGFR" public_interface="out" units="dimensionless"/>
    
	<variable name="EGF_EGFR" public_interface="in" units="dimensionless"/>
	<variable name="pEGFR_Akt" public_interface="in" units="dimensionless"/>
	<variable name="Akt" public_interface="in" units="dimensionless"/>
	<variable name="k1_pEGFR_degradation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_Akt_phosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_EGFR_phosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_pEGFR_Akt" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k2_pEGFR_Akt" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> pEGFR </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k1_EGFR_phosphorylation </ci>
              <ci> EGF_EGFR </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k1_Akt_phosphorylation </ci>
              <ci> pEGFR_Akt </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k2_pEGFR_Akt </ci>
              <ci> pEGFR_Akt </ci>
			</apply>
		  </apply>
		  <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k1_pEGFR_degradation </ci>
			  <ci> pEGFR </ci>
			</apply>
            <apply>
              <times/>
			  <ci> k1_pEGFR_Akt </ci> 
			  <ci> pEGFR </ci>
		      <ci> Akt </ci>
			</apply>
          </apply>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="pEGFR_Akt">
    <variable initial_value="0.0" name="pEGFR_Akt" public_interface="out" units="dimensionless"/>
    
	<variable name="pEGFR" public_interface="in" units="dimensionless"/>
	<variable name="Akt" public_interface="in" units="dimensionless"/>
	<variable name="k1_Akt_phosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_pEGFR_Akt" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k2_pEGFR_Akt" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> pEGFR_Akt </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
			<ci> k1_pEGFR_Akt </ci> 
			<ci> pEGFR </ci>
		    <ci> Akt </ci>
		  </apply>
		  <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k2_pEGFR_Akt </ci>
              <ci> pEGFR_Akt </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k1_Akt_phosphorylation </ci>
              <ci> pEGFR_Akt </ci>
			</apply>
		  </apply>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="Akt">
    <variable cmeta:id="Akt_Akt" initial_value="4.33090e-2" name="Akt" public_interface="out" units="dimensionless"/>
    
	<variable name="pEGFR" public_interface="in" units="dimensionless"/>
	<variable name="pEGFR_Akt" public_interface="in" units="dimensionless"/>
	<variable name="pAkt" public_interface="in" units="dimensionless"/>
	<variable name="k1_pAkt_dephosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_pEGFR_Akt" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k2_pEGFR_Akt" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> Akt </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k2_pEGFR_Akt </ci>
              <ci> pEGFR_Akt </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k1_pAkt_dephosphorylation </ci>
              <ci> pAkt </ci>
			</apply>
		  </apply>
		  <apply>
            <times/>
			<ci> k1_pEGFR_Akt </ci> 
			<ci> pEGFR </ci>
		    <ci> Akt </ci>
		  </apply>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="pAkt">
    <variable cmeta:id="pAkt_pAkt" initial_value="0.0" name="pAkt" public_interface="out" units="dimensionless"/>
    
	<variable name="S6" public_interface="in" units="dimensionless"/>
	<variable name="pEGFR_Akt" public_interface="in" units="dimensionless"/>
	<variable name="pAkt_S6" public_interface="in" units="dimensionless"/>
	<variable name="k1_Akt_phosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_pAkt_S6" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k2_pAkt_S6" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_S6_phosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_pAkt_dephosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> pAkt </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k1_Akt_phosphorylation </ci>
              <ci> pEGFR_Akt </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k2_pAkt_S6 </ci>
              <ci> pAkt_S6 </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k1_S6_phosphorylation </ci>
              <ci> pAkt_S6 </ci>
			</apply>
		  </apply>
		  <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k1_pAkt_dephosphorylation </ci>
              <ci> pAkt </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k1_pAkt_S6 </ci>
              <ci> pAkt </ci>
			  <ci> S6 </ci>
			</apply>
		  </apply>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="pAkt_S6">
    <variable initial_value="0.0" name="pAkt_S6" public_interface="out" units="dimensionless"/>
    
	<variable name="S6" public_interface="in" units="dimensionless"/>
	<variable name="pAkt" public_interface="in" units="dimensionless"/>
	<variable name="k1_pAkt_S6" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k2_pAkt_S6" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_S6_phosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> pAkt_S6 </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
			<ci> k1_pAkt_S6 </ci>
            <ci> pAkt </ci>
			<ci> S6 </ci>
		  </apply>
		  <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k2_pAkt_S6 </ci>
              <ci> pAkt_S6 </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k1_S6_phosphorylation </ci>
              <ci> pAkt_S6 </ci>
			</apply>
		  </apply>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="S6">
    <variable cmeta:id="S6_S6" initial_value="3.54317e0" name="S6" public_interface="out" units="dimensionless"/>
    
	<variable name="pAkt_S6" public_interface="in" units="dimensionless"/>
	<variable name="pS6" public_interface="in" units="dimensionless"/>
	<variable name="pAkt" public_interface="in" units="dimensionless"/>
	<variable name="k1_pAkt_S6" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k2_pAkt_S6" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_pS6_dephosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> S6 </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k2_pAkt_S6 </ci>
              <ci> pAkt_S6 </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k1_pS6_dephosphorylation </ci>
              <ci> pS6 </ci>
			</apply>
		  </apply>
		  <apply>
            <times/>
			<ci> k1_pAkt_S6 </ci>
            <ci> pAkt </ci>
			<ci> S6 </ci>
		  </apply> 
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="pS6">
    <variable cmeta:id="pS6_pS6" initial_value="0.0" name="pS6" public_interface="out" units="dimensionless"/>
    
	<variable name="pAkt_S6" public_interface="in" units="dimensionless"/>
	<variable name="k1_S6_phosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_pS6_dephosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> pS6 </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
			<ci> k1_S6_phosphorylation </ci>
            <ci> pAkt_S6 </ci>
		  </apply>
		  <apply>
            <times/>
			<ci> k1_pS6_dephosphorylation </ci>
            <ci> pS6 </ci>
		  </apply>
	    </apply>
      </apply>    
    </math>
  </component>
  
  <component name="pEGFR_total">
    <variable name="pEGFR_total" units="dimensionless"/>
    <variable initial_value="1.81735e-4" name="pEGFR_scalefactor" units="dimensionless"/>
	
	<variable name="pEGFR" public_interface="in" units="dimensionless"/>
	<variable name="pEGFR_Akt" public_interface="in" units="dimensionless"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> pEGFR_total </ci> 
        <apply>
          <times/>
          <apply>
            <plus/>
			<ci> pEGFR </ci>
            <ci> pEGFR_Akt </ci>
		  </apply>
		  <ci> pEGFR_scalefactor </ci>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="pAkt_total">
    <variable name="pAkt_total" units="dimensionless"/>
    <variable initial_value="6.00588e1" name="pAkt_scalefactor" units="dimensionless"/>
	
	<variable name="pAkt" public_interface="in" units="dimensionless"/>
	<variable name="pAkt_S6" public_interface="in" units="dimensionless"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> pAkt_total </ci> 
        <apply>
          <times/>
          <apply>
            <plus/>
			<ci> pAkt </ci>
            <ci> pAkt_S6 </ci>
		  </apply>
		  <ci> pAkt_scalefactor </ci>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="pS6_total">
    <variable name="pS6_total" units="dimensionless"/>
    <variable initial_value="4.98862e4" name="pS6_scalefactor" units="dimensionless"/>
	
	<variable name="pS6" public_interface="in" units="dimensionless"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> pS6_total </ci> 
        <apply>
          <times/>
          <ci> pS6 </ci>
          <ci> pS6_scalefactor </ci>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="model_parameters">
    <variable initial_value="4.07490e-2" name="EGF_binding_kb" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="6.73816e-3" name="EGF_binding_kf" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="5.25097e-5" name="inhibitor_binding_kb" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="2.434663e-5" name="inhibitor_binding_kf" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="1.06386129269658e-4" name="EGFR_turnover" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="1.21498e-3" name="k1_S6_phosphorylation" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="1.13102e-3" name="k1_pS6_dephosphorylation" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="2.10189e-6" name="k1_pAkt_S6" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="5.17940e-15" name="k2_pAkt_S6" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="3.05684e-2" name="k1_Akt_phosphorylation" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="3.27962e-2" name="k1_pAkt_dephosphorylation" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="1.55430e-5" name="k1_pEGFR_Akt" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="5.17473e-3" name="k2_pEGFR_Akt" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="9.97194e-2" name="k1_pEGFR_degradation" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="1.92391e-2" name="k1_EGFR_phosphorylation" public_interface="out" units="first_order_rate_constant"/>
  </component>
  
  
  <connection>
    <map_components component_1="EGFR" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="EGF_EGFR" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="EGFR_i" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="EGF_EGFR_i" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="pEGFR" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="pEGFR_Akt" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="Akt" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt_S6" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="S6" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="pS6" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
 
  <connection>
    <map_components component_1="EGFR" component_2="EGF_EGFR"/>
    <map_variables variable_1="EGF_EGFR" variable_2="EGF_EGFR"/>
	<map_variables variable_1="EGFR" variable_2="EGFR"/>
  </connection>
  
  <connection>
    <map_components component_1="EGFR" component_2="EGFR_i"/>
    <map_variables variable_1="EGFR_i" variable_2="EGFR_i"/>
	<map_variables variable_1="EGFR" variable_2="EGFR"/>
  </connection>
  
  <connection>
    <map_components component_1="EGFR" component_2="EGF"/>
    <map_variables variable_1="EGF" variable_2="EGF"/>
  </connection>
  
  <connection>
    <map_components component_1="EGFR" component_2="inhibitor"/>
    <map_variables variable_1="inhibitor" variable_2="inhibitor"/>
  </connection>
  
  <connection>
    <map_components component_1="EGFR" component_2="pro_EGFR"/>
    <map_variables variable_1="pro_EGFR" variable_2="pro_EGFR"/>
  </connection>
  
  <connection>
    <map_components component_1="EGFR" component_2="model_parameters"/>
    <map_variables variable_1="EGF_binding_kf" variable_2="EGF_binding_kf"/>
    <map_variables variable_1="EGF_binding_kb" variable_2="EGF_binding_kb"/>
	<map_variables variable_1="inhibitor_binding_kf" variable_2="inhibitor_binding_kf"/>
    <map_variables variable_1="inhibitor_binding_kb" variable_2="inhibitor_binding_kb"/>
	<map_variables variable_1="EGFR_turnover" variable_2="EGFR_turnover"/>
  </connection>
  
  <connection>
    <map_components component_1="EGF_EGFR" component_2="EGF"/>
    <map_variables variable_1="EGF" variable_2="EGF"/>
  </connection>
  
  <connection>
    <map_components component_1="EGF_EGFR" component_2="EGF_EGFR_i"/>
    <map_variables variable_1="EGF_EGFR_i" variable_2="EGF_EGFR_i"/>
	<map_variables variable_1="EGF_EGFR" variable_2="EGF_EGFR"/>
  </connection>
  
  <connection>
    <map_components component_1="EGF_EGFR" component_2="inhibitor"/>
    <map_variables variable_1="inhibitor" variable_2="inhibitor"/>
  </connection>
  
  <connection>
    <map_components component_1="EGF_EGFR" component_2="model_parameters"/>
    <map_variables variable_1="EGF_binding_kf" variable_2="EGF_binding_kf"/>
    <map_variables variable_1="EGF_binding_kb" variable_2="EGF_binding_kb"/>
	<map_variables variable_1="inhibitor_binding_kf" variable_2="inhibitor_binding_kf"/>
    <map_variables variable_1="inhibitor_binding_kb" variable_2="inhibitor_binding_kb"/>
	<map_variables variable_1="k1_EGFR_phosphorylation" variable_2="k1_EGFR_phosphorylation"/>
  </connection>
  
  <connection>
    <map_components component_1="EGFR_i" component_2="EGF_EGFR_i"/>
    <map_variables variable_1="EGF_EGFR_i" variable_2="EGF_EGFR_i"/>
	<map_variables variable_1="EGFR_i" variable_2="EGFR_i"/>
  </connection>
  
  <connection>
    <map_components component_1="EGFR_i" component_2="EGF"/>
    <map_variables variable_1="EGF" variable_2="EGF"/>
  </connection>
  
  <connection>
    <map_components component_1="EGFR_i" component_2="inhibitor"/>
    <map_variables variable_1="inhibitor" variable_2="inhibitor"/>
  </connection>
  
  <connection>
    <map_components component_1="EGFR_i" component_2="model_parameters"/>
    <map_variables variable_1="EGF_binding_kf" variable_2="EGF_binding_kf"/>
    <map_variables variable_1="EGF_binding_kb" variable_2="EGF_binding_kb"/>
	<map_variables variable_1="inhibitor_binding_kf" variable_2="inhibitor_binding_kf"/>
    <map_variables variable_1="inhibitor_binding_kb" variable_2="inhibitor_binding_kb"/>
	<map_variables variable_1="EGFR_turnover" variable_2="EGFR_turnover"/>
  </connection>
  
  <connection>
    <map_components component_1="EGF_EGFR_i" component_2="EGF"/>
    <map_variables variable_1="EGF" variable_2="EGF"/>
  </connection>
  
  <connection>
    <map_components component_1="EGF_EGFR_i" component_2="inhibitor"/>
    <map_variables variable_1="inhibitor" variable_2="inhibitor"/>
  </connection>
  
  <connection>
    <map_components component_1="EGF_EGFR_i" component_2="model_parameters"/>
    <map_variables variable_1="EGF_binding_kf" variable_2="EGF_binding_kf"/>
    <map_variables variable_1="EGF_binding_kb" variable_2="EGF_binding_kb"/>
	<map_variables variable_1="inhibitor_binding_kf" variable_2="inhibitor_binding_kf"/>
    <map_variables variable_1="inhibitor_binding_kb" variable_2="inhibitor_binding_kb"/>
  </connection>
  
  <connection>
    <map_components component_1="pEGFR" component_2="EGF_EGFR"/>
    <map_variables variable_1="EGF_EGFR" variable_2="EGF_EGFR"/>
  </connection>
  
  <connection>
    <map_components component_1="pEGFR" component_2="pEGFR_Akt"/>
    <map_variables variable_1="pEGFR" variable_2="pEGFR"/>
	<map_variables variable_1="pEGFR_Akt" variable_2="pEGFR_Akt"/>
  </connection>
  
  <connection>
    <map_components component_1="pEGFR" component_2="Akt"/>
    <map_variables variable_1="pEGFR" variable_2="pEGFR"/>
	<map_variables variable_1="Akt" variable_2="Akt"/>
  </connection>
  
  <connection>
    <map_components component_1="pEGFR" component_2="model_parameters"/>
    <map_variables variable_1="k1_pEGFR_degradation" variable_2="k1_pEGFR_degradation"/>
    <map_variables variable_1="k1_Akt_phosphorylation" variable_2="k1_Akt_phosphorylation"/>
	<map_variables variable_1="k1_EGFR_phosphorylation" variable_2="k1_EGFR_phosphorylation"/>
	<map_variables variable_1="k1_pEGFR_Akt" variable_2="k1_pEGFR_Akt"/>
	<map_variables variable_1="k2_pEGFR_Akt" variable_2="k2_pEGFR_Akt"/>
  </connection>
  
  <connection>
    <map_components component_1="pEGFR_Akt" component_2="Akt"/>
    <map_variables variable_1="pEGFR_Akt" variable_2="pEGFR_Akt"/>
	<map_variables variable_1="Akt" variable_2="Akt"/>
  </connection>
  
  <connection>
    <map_components component_1="pEGFR_Akt" component_2="model_parameters"/>
    <map_variables variable_1="k1_Akt_phosphorylation" variable_2="k1_Akt_phosphorylation"/>
	<map_variables variable_1="k1_pEGFR_Akt" variable_2="k1_pEGFR_Akt"/>
	<map_variables variable_1="k2_pEGFR_Akt" variable_2="k2_pEGFR_Akt"/>
  </connection>
  
  <connection>
    <map_components component_1="Akt" component_2="pAkt"/>
    <map_variables variable_1="pAkt" variable_2="pAkt"/>
  </connection>
  
  <connection>
    <map_components component_1="Akt" component_2="model_parameters"/>
    <map_variables variable_1="k1_pAkt_dephosphorylation" variable_2="k1_pAkt_dephosphorylation"/>
	<map_variables variable_1="k1_pEGFR_Akt" variable_2="k1_pEGFR_Akt"/>
	<map_variables variable_1="k2_pEGFR_Akt" variable_2="k2_pEGFR_Akt"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt" component_2="S6"/>
    <map_variables variable_1="S6" variable_2="S6"/>
	<map_variables variable_1="pAkt" variable_2="pAkt"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt" component_2="pAkt_S6"/>
    <map_variables variable_1="pAkt_S6" variable_2="pAkt_S6"/>
	<map_variables variable_1="pAkt" variable_2="pAkt"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt" component_2="pEGFR_Akt"/>
    <map_variables variable_1="pEGFR_Akt" variable_2="pEGFR_Akt"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt" component_2="model_parameters"/>
    <map_variables variable_1="k1_Akt_phosphorylation" variable_2="k1_Akt_phosphorylation"/>
	<map_variables variable_1="k1_pAkt_S6" variable_2="k1_pAkt_S6"/>
	<map_variables variable_1="k2_pAkt_S6" variable_2="k2_pAkt_S6"/>
	<map_variables variable_1="k1_S6_phosphorylation" variable_2="k1_S6_phosphorylation"/>
	<map_variables variable_1="k1_pAkt_dephosphorylation" variable_2="k1_pAkt_dephosphorylation"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt_S6" component_2="S6"/>
    <map_variables variable_1="S6" variable_2="S6"/>
	<map_variables variable_1="pAkt_S6" variable_2="pAkt_S6"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt_S6" component_2="model_parameters"/>
    <map_variables variable_1="k1_pAkt_S6" variable_2="k1_pAkt_S6"/>
	<map_variables variable_1="k2_pAkt_S6" variable_2="k2_pAkt_S6"/>
	<map_variables variable_1="k1_S6_phosphorylation" variable_2="k1_S6_phosphorylation"/>
  </connection>
  
  <connection>
    <map_components component_1="S6" component_2="pS6"/>
    <map_variables variable_1="pS6" variable_2="pS6"/>
  </connection>
  
  <connection>
    <map_components component_1="S6" component_2="model_parameters"/>
    <map_variables variable_1="k1_pAkt_S6" variable_2="k1_pAkt_S6"/>
	<map_variables variable_1="k2_pAkt_S6" variable_2="k2_pAkt_S6"/>
	<map_variables variable_1="k1_pS6_dephosphorylation" variable_2="k1_pS6_dephosphorylation"/>
  </connection>
  
  <connection>
    <map_components component_1="pS6" component_2="pAkt_S6"/>
    <map_variables variable_1="pAkt_S6" variable_2="pAkt_S6"/>
  </connection>
  
  <connection>
    <map_components component_1="pS6" component_2="model_parameters"/>
    <map_variables variable_1="k1_S6_phosphorylation" variable_2="k1_S6_phosphorylation"/>
	<map_variables variable_1="k1_pS6_dephosphorylation" variable_2="k1_pS6_dephosphorylation"/>
  </connection>
  
  <connection>
    <map_components component_1="pEGFR_total" component_2="pEGFR"/>
    <map_variables variable_1="pEGFR" variable_2="pEGFR"/>
  </connection>
  
  <connection>
    <map_components component_1="pEGFR_total" component_2="pEGFR_Akt"/>
    <map_variables variable_1="pEGFR_Akt" variable_2="pEGFR_Akt"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt_total" component_2="pAkt"/>
    <map_variables variable_1="pAkt" variable_2="pAkt"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt_total" component_2="pAkt_S6"/>
    <map_variables variable_1="pAkt_S6" variable_2="pAkt_S6"/>
  </connection>
  
  <connection>
    <map_components component_1="pS6_total" component_2="pS6"/>
    <map_variables variable_1="pS6" variable_2="pS6"/>
  </connection>
 
  
  
<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"><rdf:Description rdf:nodeID="n1"><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">S</Given><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Kuroda</Family></rdf:Description><rdf:Description rdf:nodeID="n2"><rdf:type><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/></rdf:type><rdf:_1 xml:lang="en">signal transduction</rdf:_1><rdf:_2 xml:lang="en">Akt</rdf:_2></rdf:Description><rdf:Description rdf:nodeID="n3"><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine</Given><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lloyd</Family><Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">May</Other></rdf:Description><rdf:Description rdf:nodeID="n4"><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Y</Given><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Ozaki</Family></rdf:Description><rdf:Description rdf:nodeID="n5"><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">H</Given><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Kubota</Family></rdf:Description><rdf:Description rdf:nodeID="n6"><title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
            Decoupling of receptor and downstream signals in the Akt pathway by its low-pass filter characteristics
          </title><creator xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:nodeID="n7"/></creator><Journal xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n8"/></Journal><issued xmlns="http://purl.org/dc/terms/"><rdf:Description rdf:nodeID="n9"/></issued><volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">3</volume><issue xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">132</issue></rdf:Description><rdf:Description rdf:about="#fujita_2010"><simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#"><rdf:Description rdf:nodeID="n10"/></simulation><reference xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n11"/></reference><reference xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n12"/></reference></rdf:Description><rdf:Description rdf:nodeID="n11"><Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">20664065</Pubmed_id><JournalArticle xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n6"/></JournalArticle></rdf:Description><rdf:Description rdf:nodeID="n13"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n1"/></N></rdf:Description><rdf:Description rdf:nodeID="n14"><Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The University of Auckland</Orgname><Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Auckland Bioengineering Institute</Orgunit></rdf:Description><rdf:Description rdf:nodeID="n9"><W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2010-07-27</W3CDTF></rdf:Description><rdf:Description rdf:nodeID="n15"><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">S</Given><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Uda</Family></rdf:Description><rdf:Description rdf:nodeID="n16"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n5"/></N></rdf:Description><rdf:Description rdf:nodeID="n17"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n15"/></N></rdf:Description><rdf:Description rdf:nodeID="n18"><Person xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n19"/></Person></rdf:Description><rdf:Description rdf:nodeID="n20"><Person xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n17"/></Person></rdf:Description><rdf:Description rdf:nodeID="n21"><Person xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n13"/></Person></rdf:Description><rdf:Description rdf:nodeID="n22"><rdf:type><rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/></rdf:type><rdf:value xml:lang="en">c.lloyd@auckland.ac.nz</rdf:value></rdf:Description><rdf:Description rdf:nodeID="n8"><title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Science Signaling</title></rdf:Description><rdf:Description rdf:about=""><title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
        Decoupling of receptor and downstream signals in the Akt pathway by its low-pass filter characteristics: EGFR-inhibited Akt pathway model
      </title><creator xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:nodeID="n23"/></creator></rdf:Description><rdf:Description rdf:nodeID="n19"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n4"/></N></rdf:Description><rdf:Description rdf:nodeID="n24"><rdf:value><rdf:Description rdf:nodeID="n2"/></rdf:value><subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type></rdf:Description><rdf:Description rdf:nodeID="n25"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n26"/></N></rdf:Description><rdf:Description rdf:nodeID="n27"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n28"/></N></rdf:Description><rdf:Description rdf:nodeID="n28"><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">K</Given><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Fujita</Family><Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">A</Other></rdf:Description><rdf:Description rdf:nodeID="n7"><rdf:type><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/></rdf:type><rdf:_1><rdf:Description rdf:nodeID="n29"/></rdf:_1><rdf:_2><rdf:Description rdf:nodeID="n30"/></rdf:_2><rdf:_3><rdf:Description rdf:nodeID="n20"/></rdf:_3><rdf:_6><rdf:Description rdf:nodeID="n21"/></rdf:_6><rdf:_5><rdf:Description rdf:nodeID="n31"/></rdf:_5><rdf:_4><rdf:Description rdf:nodeID="n18"/></rdf:_4></rdf:Description><rdf:Description rdf:nodeID="n30"><Person xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n25"/></Person></rdf:Description><rdf:Description rdf:nodeID="n32"><rdf:first><rdf:Description rdf:nodeID="n33"/></rdf:first><rdf:rest><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/></rdf:rest></rdf:Description><rdf:Description rdf:nodeID="n29"><Person xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n27"/></Person></rdf:Description><rdf:Description rdf:nodeID="n23"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n3"/></N><EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n22"/></EMAIL><ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n14"/></ORG></rdf:Description><rdf:Description rdf:nodeID="n33"><endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">100</endingValue><maximumStepSize xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">10</maximumStepSize></rdf:Description><rdf:Description rdf:nodeID="n12"><subject xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:nodeID="n24"/></subject></rdf:Description><rdf:Description rdf:nodeID="n26"><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Y</Given><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Toyoshima</Family></rdf:Description><rdf:Description rdf:nodeID="n31"><Person xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n16"/></Person></rdf:Description><rdf:Description rdf:nodeID="n10"><boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#"><rdf:Description rdf:nodeID="n32"/></boundIntervals></rdf:Description></rdf:RDF></model>