<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="fujita_2010" name="fujita_2010">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Decoupling of receptor and downstream signals in the Akt pathway by its low-pass filter characteristics</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
        This CellML represents the NGF-dependent Akt Pathway model from the original publication (NGF has been set to 30).  The model runs in both COR and OpenCell to replicate the published results.  The units have been checked and they are consistent.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: In cellular signal transduction, the information in an external stimulus is encoded in temporal patterns in the activities of signaling molecules; for example, pulses of a stimulus may produce an increasing response or may produce pulsatile responses in the signaling molecules. Here, we show how the Akt pathway, which is involved in cell growth, specifically transmits temporal information contained in upstream signals to downstream effectors. We modeled the epidermal growth factor (EGF)-dependent Akt pathway in PC12 cells on the basis of experimental results. We obtained counterintuitive results indicating that the sizes of the peak amplitudes of receptor and downstream effector phosphorylation were decoupled; weak, sustained EGF receptor (EGFR) phosphorylation, rather than strong, transient phosphorylation, strongly induced phosphorylation of the ribosomal protein S6, a molecule downstream of Akt. Using frequency response analysis, we found that a three-component Akt pathway exhibited the property of a low-pass filter and that this property could explain decoupling of the peak amplitudes of receptor phosphorylation and that of downstream effectors. Furthermore, we found that lapatinib, an EGFR inhibitor used as an anticancer drug, converted strong, transient Akt phosphorylation into weak, sustained Akt phosphorylation, and, because of the low-pass filter characteristics of the Akt pathway, this led to stronger S6 phosphorylation than occurred in the absence of the inhibitor. Thus, an EGFR inhibitor can potentially act as a downstream activator of some effectors.
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="fujita_2010b.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram of the simple simulation model of the NGF-dependent Akt pathway.</caption>
</informalfigure>

<para>
The original paper reference is cited below:
</para>

<para>
Decoupling of receptor and downstream signals in the Akt pathway by its low-pass filter characteristics, Fujita KA, Toyoshima Y, Uda S, Ozaki Y, Kubota H, and Kuroda S, 2009, <emphasis>Science Signaling</emphasis>, 3, issue 132.  <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/20664065">PubMed ID: 20664065</ulink></para>

</sect1>
</article>
</documentation> 



  <units name="first_order_rate_constant">
    <unit exponent="-1" units="second"/>
  </units>

  
  <component name="environment">
    <variable cmeta:id="environment_time" name="time" public_interface="out" units="second"/>
  </component>
  
  <component name="NGF">
    <variable cmeta:id="NGF_NGF" initial_value="30.0" name="NGF" public_interface="out" units="dimensionless"/>
  </component>
  
  <component name="pro_TrkA">
    <variable cmeta:id="pro_TrkA_pro_TrkA" initial_value="8.52065e0" name="pro_TrkA" public_interface="out" units="dimensionless"/>
  </component>
  
  <component name="TrkA">
    <variable cmeta:id="TrkA_TrkA" initial_value="8.52065e0" name="TrkA" public_interface="out" units="dimensionless"/>
    
	<variable name="NGF_TrkA" public_interface="in" units="dimensionless"/>
	<variable name="NGF" public_interface="in" units="dimensionless"/>
	<variable name="pro_TrkA" public_interface="in" units="dimensionless"/>
	<variable name="k2_NGF_TrkA" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_NGF_TrkA" public_interface="in" units="first_order_rate_constant"/>
	<variable name="TrkA_turnover" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> TrkA </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k2_NGF_TrkA </ci>
              <ci> NGF_TrkA </ci>
			</apply>
			<apply>
              <times/>
			  <ci> TrkA_turnover </ci>
			  <apply>
                <minus/>
				<ci> pro_TrkA </ci>
                <ci> TrkA </ci>
			  </apply>
			</apply>
          </apply>
		  <apply>
            <times/>
			<ci> k1_NGF_TrkA </ci> 
			<ci> NGF </ci>
		    <ci> TrkA </ci>
          </apply>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="NGF_TrkA">
    <variable cmeta:id="NGF_TrkA_NGF_TrkA" initial_value="0.0" name="NGF_TrkA" public_interface="out" units="dimensionless"/>
    
	<variable name="TrkA" public_interface="in" units="dimensionless"/>
	<variable name="NGF" public_interface="in" units="dimensionless"/>
	<variable name="k2_NGF_TrkA" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_NGF_TrkA" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_TrkA_phosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> NGF_TrkA </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
			<ci> k1_NGF_TrkA </ci> 
			<ci> NGF </ci>
		    <ci> TrkA </ci>
          </apply>
		  <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k2_NGF_TrkA </ci>
              <ci> NGF_TrkA </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k1_TrkA_phosphorylation </ci>
			  <ci> NGF_TrkA </ci>
			</apply>
		  </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="pTrkA">
    <variable cmeta:id="pTrkA_pTrkA" initial_value="0.0" name="pTrkA" public_interface="out" units="dimensionless"/>
    
	<variable name="NGF_TrkA" public_interface="in" units="dimensionless"/>
	<variable name="pTrkA_Akt" public_interface="in" units="dimensionless"/>
	<variable name="Akt" public_interface="in" units="dimensionless"/>
	<variable name="k1_pTrkA_degradation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_Akt_phosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_TrkA_phosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_pTrkA_Akt" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k2_pTrkA_Akt" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> pTrkA </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k1_TrkA_phosphorylation </ci>
              <ci> NGF_TrkA </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k1_Akt_phosphorylation </ci>
              <ci> pTrkA_Akt </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k2_pTrkA_Akt </ci>
              <ci> pTrkA_Akt </ci>
			</apply>
		  </apply>
		  <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k1_pTrkA_degradation </ci>
			  <ci> pTrkA </ci>
			</apply>
            <apply>
              <times/>
			  <ci> k1_pTrkA_Akt </ci> 
			  <ci> pTrkA </ci>
		      <ci> Akt </ci>
			</apply>
          </apply>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="pTrkA_Akt">
    <variable initial_value="0.0" name="pTrkA_Akt" public_interface="out" units="dimensionless"/>
    
	<variable name="pTrkA" public_interface="in" units="dimensionless"/>
	<variable name="Akt" public_interface="in" units="dimensionless"/>
	<variable name="k1_Akt_phosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_pTrkA_Akt" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k2_pTrkA_Akt" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> pTrkA_Akt </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
			<ci> k1_pTrkA_Akt </ci> 
			<ci> pTrkA </ci>
		    <ci> Akt </ci>
		  </apply>
		  <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k2_pTrkA_Akt </ci>
              <ci> pTrkA_Akt </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k1_Akt_phosphorylation </ci>
              <ci> pTrkA_Akt </ci>
			</apply>
		  </apply>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="Akt">
    <variable cmeta:id="Akt_Akt" initial_value="1.15595e0" name="Akt" public_interface="out" units="dimensionless"/>
    
	<variable name="pTrkA" public_interface="in" units="dimensionless"/>
	<variable name="pTrkA_Akt" public_interface="in" units="dimensionless"/>
	<variable name="pAkt" public_interface="in" units="dimensionless"/>
	<variable name="k1_pAkt_dephosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_pTrkA_Akt" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k2_pTrkA_Akt" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> Akt </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k2_pTrkA_Akt </ci>
              <ci> pTrkA_Akt </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k1_pAkt_dephosphorylation </ci>
              <ci> pAkt </ci>
			</apply>
		  </apply>
		  <apply>
            <times/>
			<ci> k1_pTrkA_Akt </ci> 
			<ci> pTrkA </ci>
		    <ci> Akt </ci>
		  </apply>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="pAkt">
    <variable cmeta:id="pAkt_pAkt" initial_value="0.0" name="pAkt" public_interface="out" units="dimensionless"/>
    
	<variable name="S6" public_interface="in" units="dimensionless"/>
	<variable name="pTrkA_Akt" public_interface="in" units="dimensionless"/>
	<variable name="pAkt_S6" public_interface="in" units="dimensionless"/>
	<variable name="k1_Akt_phosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_pAkt_S6" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k2_pAkt_S6" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_S6_phosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_pAkt_dephosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> pAkt </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k1_Akt_phosphorylation </ci>
              <ci> pTrkA_Akt </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k2_pAkt_S6 </ci>
              <ci> pAkt_S6 </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k1_S6_phosphorylation </ci>
              <ci> pAkt_S6 </ci>
			</apply>
		  </apply>
		  <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k1_pAkt_dephosphorylation </ci>
              <ci> pAkt </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k1_pAkt_S6 </ci>
              <ci> pAkt </ci>
			  <ci> S6 </ci>
			</apply>
		  </apply>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="pAkt_S6">
    <variable initial_value="0.0" name="pAkt_S6" public_interface="out" units="dimensionless"/>
    
	<variable name="S6" public_interface="in" units="dimensionless"/>
	<variable name="pAkt" public_interface="in" units="dimensionless"/>
	<variable name="k1_pAkt_S6" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k2_pAkt_S6" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_S6_phosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> pAkt_S6 </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
			<ci> k1_pAkt_S6 </ci>
            <ci> pAkt </ci>
			<ci> S6 </ci>
		  </apply>
		  <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k2_pAkt_S6 </ci>
              <ci> pAkt_S6 </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k1_S6_phosphorylation </ci>
              <ci> pAkt_S6 </ci>
			</apply>
		  </apply>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="S6">
    <variable cmeta:id="S6_S6" initial_value="3.55234e0" name="S6" public_interface="out" units="dimensionless"/>
    
	<variable name="pAkt_S6" public_interface="in" units="dimensionless"/>
	<variable name="pS6" public_interface="in" units="dimensionless"/>
	<variable name="pAkt" public_interface="in" units="dimensionless"/>
	<variable name="k1_pAkt_S6" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k2_pAkt_S6" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_pS6_dephosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> S6 </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
			<apply>
              <times/>
			  <ci> k2_pAkt_S6 </ci>
              <ci> pAkt_S6 </ci>
			</apply>
			<apply>
              <times/>
			  <ci> k1_pS6_dephosphorylation </ci>
              <ci> pS6 </ci>
			</apply>
		  </apply>
		  <apply>
            <times/>
			<ci> k1_pAkt_S6 </ci>
            <ci> pAkt </ci>
			<ci> S6 </ci>
		  </apply> 
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="pS6">
    <variable cmeta:id="pS6_pS6" initial_value="0.0" name="pS6" public_interface="out" units="dimensionless"/>
    
	<variable name="pAkt_S6" public_interface="in" units="dimensionless"/>
	<variable name="k1_S6_phosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="k1_pS6_dephosphorylation" public_interface="in" units="first_order_rate_constant"/>
	<variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> pS6 </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
			<ci> k1_S6_phosphorylation </ci>
            <ci> pAkt_S6 </ci>
		  </apply>
		  <apply>
            <times/>
			<ci> k1_pS6_dephosphorylation </ci>
            <ci> pS6 </ci>
		  </apply>
	    </apply>
      </apply>    
    </math>
  </component>
  
  <component name="pTrkA_total">
    <variable name="pTrkA_total" units="dimensionless"/>
    <variable initial_value="8.48783e-1" name="pTrkA_scalefactor" units="dimensionless"/>
	
	<variable name="pTrkA" public_interface="in" units="dimensionless"/>
	<variable name="pTrkA_Akt" public_interface="in" units="dimensionless"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> pTrkA_total </ci> 
        <apply>
          <times/>
          <apply>
            <plus/>
			<ci> pTrkA </ci>
            <ci> pTrkA_Akt </ci>
		  </apply>
		  <ci> pTrkA_scalefactor </ci>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="pAkt_total">
    <variable name="pAkt_total" units="dimensionless"/>
    <variable initial_value="2.42381e0" name="pAkt_scalefactor" units="dimensionless"/>
	
	<variable name="pAkt" public_interface="in" units="dimensionless"/>
	<variable name="pAkt_S6" public_interface="in" units="dimensionless"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> pAkt_total </ci> 
        <apply>
          <times/>
          <apply>
            <plus/>
			<ci> pAkt </ci>
            <ci> pAkt_S6 </ci>
		  </apply>
		  <ci> pAkt_scalefactor </ci>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="pS6_total">
    <variable name="pS6_total" units="dimensionless"/>
    <variable initial_value="5.25843e-1" name="pS6_scalefactor" units="dimensionless"/>
	
	<variable name="pS6" public_interface="in" units="dimensionless"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> pS6_total </ci> 
        <apply>
          <times/>
          <ci> pS6 </ci>
          <ci> pS6_scalefactor </ci>
		</apply>
      </apply>    
    </math>
  </component>
  
  <component name="model_parameters">
    <variable initial_value="1.33747e-2" name="k2_NGF_TrkA" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="2.69408e-3" name="k1_NGF_TrkA" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="0.0011032440769796" name="TrkA_turnover" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="5.65150e-3" name="k1_S6_phosphorylation" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="2.93167e-4" name="k1_pS6_dephosphorylation" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="6.83666e1" name="k1_pAkt_S6" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="5.23519e-00" name="k2_pAkt_S6" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="2.02517e-2" name="k1_Akt_phosphorylation" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="1.28135e0" name="k1_pAkt_dephosphorylation" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="8.82701e-2" name="k1_pTrkA_Akt" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="1.47518e-10" name="k2_pTrkA_Akt" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="6.8084e-2" name="k1_pTrkA_degradation" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="8.33178e-3" name="k1_TrkA_phosphorylation" public_interface="out" units="first_order_rate_constant"/>
  </component>
  
  
  <connection>
    <map_components component_1="TrkA" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="NGF_TrkA" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="pTrkA" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="pTrkA_Akt" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="Akt" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt_S6" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="S6" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="pS6" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
 
  <connection>
    <map_components component_1="TrkA" component_2="NGF_TrkA"/>
    <map_variables variable_1="NGF_TrkA" variable_2="NGF_TrkA"/>
	<map_variables variable_1="TrkA" variable_2="TrkA"/>
  </connection>
  
  <connection>
    <map_components component_1="TrkA" component_2="NGF"/>
    <map_variables variable_1="NGF" variable_2="NGF"/>
  </connection>
  
  <connection>
    <map_components component_1="TrkA" component_2="pro_TrkA"/>
    <map_variables variable_1="pro_TrkA" variable_2="pro_TrkA"/>
  </connection>
  
  <connection>
    <map_components component_1="TrkA" component_2="model_parameters"/>
    <map_variables variable_1="k1_NGF_TrkA" variable_2="k1_NGF_TrkA"/>
    <map_variables variable_1="k2_NGF_TrkA" variable_2="k2_NGF_TrkA"/>
	<map_variables variable_1="TrkA_turnover" variable_2="TrkA_turnover"/>
  </connection>
  
  <connection>
    <map_components component_1="NGF_TrkA" component_2="NGF"/>
    <map_variables variable_1="NGF" variable_2="NGF"/>
  </connection>
  
  <connection>
    <map_components component_1="NGF_TrkA" component_2="model_parameters"/>
    <map_variables variable_1="k1_NGF_TrkA" variable_2="k1_NGF_TrkA"/>
    <map_variables variable_1="k2_NGF_TrkA" variable_2="k2_NGF_TrkA"/>
	<map_variables variable_1="k1_TrkA_phosphorylation" variable_2="k1_TrkA_phosphorylation"/>
  </connection>
  
  <connection>
    <map_components component_1="pTrkA" component_2="NGF_TrkA"/>
    <map_variables variable_1="NGF_TrkA" variable_2="NGF_TrkA"/>
  </connection>
  
  <connection>
    <map_components component_1="pTrkA" component_2="pTrkA_Akt"/>
    <map_variables variable_1="pTrkA" variable_2="pTrkA"/>
	<map_variables variable_1="pTrkA_Akt" variable_2="pTrkA_Akt"/>
  </connection>
  
  <connection>
    <map_components component_1="pTrkA" component_2="Akt"/>
    <map_variables variable_1="pTrkA" variable_2="pTrkA"/>
	<map_variables variable_1="Akt" variable_2="Akt"/>
  </connection>
  
  <connection>
    <map_components component_1="pTrkA" component_2="model_parameters"/>
    <map_variables variable_1="k1_pTrkA_degradation" variable_2="k1_pTrkA_degradation"/>
    <map_variables variable_1="k1_Akt_phosphorylation" variable_2="k1_Akt_phosphorylation"/>
	<map_variables variable_1="k1_TrkA_phosphorylation" variable_2="k1_TrkA_phosphorylation"/>
	<map_variables variable_1="k1_pTrkA_Akt" variable_2="k1_pTrkA_Akt"/>
	<map_variables variable_1="k2_pTrkA_Akt" variable_2="k2_pTrkA_Akt"/>
  </connection>
  
  <connection>
    <map_components component_1="pTrkA_Akt" component_2="Akt"/>
    <map_variables variable_1="pTrkA_Akt" variable_2="pTrkA_Akt"/>
	<map_variables variable_1="Akt" variable_2="Akt"/>
  </connection>
  
  <connection>
    <map_components component_1="pTrkA_Akt" component_2="model_parameters"/>
    <map_variables variable_1="k1_Akt_phosphorylation" variable_2="k1_Akt_phosphorylation"/>
	<map_variables variable_1="k1_pTrkA_Akt" variable_2="k1_pTrkA_Akt"/>
	<map_variables variable_1="k2_pTrkA_Akt" variable_2="k2_pTrkA_Akt"/>
  </connection>
  
  <connection>
    <map_components component_1="Akt" component_2="pAkt"/>
    <map_variables variable_1="pAkt" variable_2="pAkt"/>
  </connection>
  
  <connection>
    <map_components component_1="Akt" component_2="model_parameters"/>
    <map_variables variable_1="k1_pAkt_dephosphorylation" variable_2="k1_pAkt_dephosphorylation"/>
	<map_variables variable_1="k1_pTrkA_Akt" variable_2="k1_pTrkA_Akt"/>
	<map_variables variable_1="k2_pTrkA_Akt" variable_2="k2_pTrkA_Akt"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt" component_2="S6"/>
    <map_variables variable_1="S6" variable_2="S6"/>
	<map_variables variable_1="pAkt" variable_2="pAkt"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt" component_2="pAkt_S6"/>
    <map_variables variable_1="pAkt_S6" variable_2="pAkt_S6"/>
	<map_variables variable_1="pAkt" variable_2="pAkt"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt" component_2="pTrkA_Akt"/>
    <map_variables variable_1="pTrkA_Akt" variable_2="pTrkA_Akt"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt" component_2="model_parameters"/>
    <map_variables variable_1="k1_Akt_phosphorylation" variable_2="k1_Akt_phosphorylation"/>
	<map_variables variable_1="k1_pAkt_S6" variable_2="k1_pAkt_S6"/>
	<map_variables variable_1="k2_pAkt_S6" variable_2="k2_pAkt_S6"/>
	<map_variables variable_1="k1_S6_phosphorylation" variable_2="k1_S6_phosphorylation"/>
	<map_variables variable_1="k1_pAkt_dephosphorylation" variable_2="k1_pAkt_dephosphorylation"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt_S6" component_2="S6"/>
    <map_variables variable_1="S6" variable_2="S6"/>
	<map_variables variable_1="pAkt_S6" variable_2="pAkt_S6"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt_S6" component_2="model_parameters"/>
    <map_variables variable_1="k1_pAkt_S6" variable_2="k1_pAkt_S6"/>
	<map_variables variable_1="k2_pAkt_S6" variable_2="k2_pAkt_S6"/>
	<map_variables variable_1="k1_S6_phosphorylation" variable_2="k1_S6_phosphorylation"/>
  </connection>
  
  <connection>
    <map_components component_1="S6" component_2="pS6"/>
    <map_variables variable_1="pS6" variable_2="pS6"/>
  </connection>
  
  <connection>
    <map_components component_1="S6" component_2="model_parameters"/>
    <map_variables variable_1="k1_pAkt_S6" variable_2="k1_pAkt_S6"/>
	<map_variables variable_1="k2_pAkt_S6" variable_2="k2_pAkt_S6"/>
	<map_variables variable_1="k1_pS6_dephosphorylation" variable_2="k1_pS6_dephosphorylation"/>
  </connection>
  
  <connection>
    <map_components component_1="pS6" component_2="pAkt_S6"/>
    <map_variables variable_1="pAkt_S6" variable_2="pAkt_S6"/>
  </connection>
  
  <connection>
    <map_components component_1="pS6" component_2="model_parameters"/>
    <map_variables variable_1="k1_S6_phosphorylation" variable_2="k1_S6_phosphorylation"/>
	<map_variables variable_1="k1_pS6_dephosphorylation" variable_2="k1_pS6_dephosphorylation"/>
  </connection>
  
  <connection>
    <map_components component_1="pTrkA_total" component_2="pTrkA"/>
    <map_variables variable_1="pTrkA" variable_2="pTrkA"/>
  </connection>
  
  <connection>
    <map_components component_1="pTrkA_total" component_2="pTrkA_Akt"/>
    <map_variables variable_1="pTrkA_Akt" variable_2="pTrkA_Akt"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt_total" component_2="pAkt"/>
    <map_variables variable_1="pAkt" variable_2="pAkt"/>
  </connection>
  
  <connection>
    <map_components component_1="pAkt_total" component_2="pAkt_S6"/>
    <map_variables variable_1="pAkt_S6" variable_2="pAkt_S6"/>
  </connection>
  
  <connection>
    <map_components component_1="pS6_total" component_2="pS6"/>
    <map_variables variable_1="pS6" variable_2="pS6"/>
  </connection>
 
  
  
<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"><rdf:Description rdf:nodeID="n1"><Person xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n2"/></Person></rdf:Description><rdf:Description rdf:nodeID="n3"><Person xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n4"/></Person></rdf:Description><rdf:Description rdf:nodeID="n4"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n5"/></N></rdf:Description><rdf:Description rdf:about=""><creator xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:nodeID="n6"/></creator><title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
        Decoupling of receptor and downstream signals in the Akt pathway by its low-pass filter characteristics: NGF-dependent Akt pathway model
      </title>
</rdf:Description>
<rdf:Description rdf:nodeID="n6">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n7"/>
</N>
<EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n8"/>
</EMAIL>
<ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n9"/>
</ORG>
</rdf:Description>
<rdf:Description rdf:nodeID="n10">
<subject xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n11"/>
</subject>
</rdf:Description>
<rdf:Description rdf:nodeID="n12">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Toyoshima</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Y</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n13">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n14"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n15">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Kuroda</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">S</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n16">
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">A</Other>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Fujita</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">K</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n17">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n16"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n18">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/>
</rdf:type>
<rdf:_1 xml:lang="en">signal transduction</rdf:_1>
<rdf:_2 xml:lang="en">Akt</rdf:_2>
</rdf:Description>
<rdf:Description rdf:nodeID="n19">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Science Signaling</title>
</rdf:Description>
<rdf:Description rdf:nodeID="n7">
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">May</Other>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lloyd</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n20">
<rdf:_5>
<rdf:Description rdf:nodeID="n21"/>
</rdf:_5>
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
</rdf:type>
<rdf:_6>
<rdf:Description rdf:nodeID="n1"/>
</rdf:_6>
<rdf:_4>
<rdf:Description rdf:nodeID="n3"/>
</rdf:_4>
<rdf:_1>
<rdf:Description rdf:nodeID="n22"/>
</rdf:_1>
<rdf:_3>
<rdf:Description rdf:nodeID="n23"/>
</rdf:_3>
<rdf:_2>
<rdf:Description rdf:nodeID="n24"/>
</rdf:_2>
</rdf:Description>
<rdf:Description rdf:nodeID="n25">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n26"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n9">
<Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The University of Auckland</Orgname>
<Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Auckland Bioengineering Institute</Orgunit>
</rdf:Description>
<rdf:Description rdf:nodeID="n23">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n25"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n26">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Uda</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">S</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n21">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n13"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n27">
<maximumStepSize xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">10</maximumStepSize>
<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">100</endingValue>
</rdf:Description>
<rdf:Description rdf:nodeID="n24">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n28"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n22">
<Person xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n17"/>
</Person>
</rdf:Description>
<rdf:Description rdf:nodeID="n29">
<rdf:first>
<rdf:Description rdf:nodeID="n27"/>
</rdf:first>
<rdf:rest>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
</rdf:rest>
</rdf:Description>
<rdf:Description rdf:nodeID="n8">
<rdf:value xml:lang="en">c.lloyd@auckland.ac.nz</rdf:value>
<rdf:type>
<rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:nodeID="n30">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2010-07-27</W3CDTF>
</rdf:Description>
<rdf:Description rdf:nodeID="n11">
<rdf:value>
<rdf:Description rdf:nodeID="n18"/>
</rdf:value>
<subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type>
</rdf:Description>
<rdf:Description rdf:nodeID="n28">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:nodeID="n12"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n31">
<Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">20664065</Pubmed_id>
<JournalArticle xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n32"/>
</JournalArticle>
</rdf:Description>
<rdf:Description rdf:nodeID="n33">
<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n29"/>
</boundIntervals>
</rdf:Description>
<rdf:Description rdf:nodeID="n5">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Ozaki</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Y</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n14">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Kubota</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">H</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n32">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:nodeID="n20"/>
</creator>
<issued xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:nodeID="n30"/>
</issued>
<Journal xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:nodeID="n19"/>
</Journal>
<volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">3</volume>
<issue xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">132</issue>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
            Decoupling of receptor and downstream signals in the Akt pathway by its low-pass filter characteristics
          </title></rdf:Description><rdf:Description rdf:about="#fujita_2010"><simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#"><rdf:Description rdf:nodeID="n33"/></simulation><reference xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n10"/></reference><reference xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n31"/></reference></rdf:Description><rdf:Description rdf:nodeID="n2"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n15"/></N></rdf:Description></rdf:RDF></model>