<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  goldbeter_model_2008.xml


--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xmlns:ns7="http://www.cellml.org/metadata/simulation/1.0#" cmeta:id="goldbeter_model_2008" name="goldbeter_model_2008">

<documentation xmlns="http://cellml.org/tmp-documentation">
    <article>
      <section id="sec_status">
        <title>Model Status</title>
        <para>
         This CellML model runs in both OpenCell and COR to recreate the published results.  The units have been checked and they are consistent.  This particular version of the model uncouples the Notch, Wnt and FGF signalling pathways and uses equations A4 and A10 in the appendix rather than A17 and A18.
          </para>
      </section>
      <sect1 id="sec_structure">
        <title>Model Structure</title>
        <para>
ABSTRACT: The formation of somites in the course of vertebrate segmentation is governed by an oscillator known as the segmentation clock, which is characterized by a period ranging from 30 min to a few hours depending on the organism. This oscillator permits the synchronized activation of segmentation genes in successive cohorts of cells in the presomitic mesoderm in response to a periodic signal emitted by the segmentation clock, thereby defining the future segments. Recent microarray experiments [Dequeant, M.L., Glynn, E., Gaudenz, K., Wahl, M., Chen, J., Mushegian, A., Pourquie, O., 2006. A complex oscillating network of signaling genes underlies the mouse segmentation clock. Science 314, 1595-1598] indicate that the Notch, Wnt and Fibroblast Growth Factor (FGF) signaling pathways are involved in the mechanism of the segmentation clock. By means of computational modeling, we investigate the conditions in which sustained oscillations occur in these three signaling pathways. First we show that negative feedback mediated by the Lunatic Fringe protein on intracellular Notch activation can give rise to periodic behavior in the Notch pathway. We then show that negative feedback exerted by Axin2 on the degradation of beta-catenin through formation of the Axin2 destruction complex can produce oscillations in the Wnt pathway. Likewise, negative feedback on FGF signaling mediated by the phosphatase product of the gene MKP3/Dusp6 can produce oscillatory gene expression in the FGF pathway. Coupling the Wnt, Notch and FGF oscillators through common intermediates can lead to synchronized oscillations in the three signaling pathways or to complex periodic behavior, depending on the relative periods of oscillations in the three pathways. The phase relationships between cycling genes in the three pathways depend on the nature of the coupling between the pathways and on their relative autonomous periods. The model provides a framework for analyzing the dynamics of the segmentation clock in terms of a network of oscillating modules involving the Wnt, Notch and FGF signaling pathways.
</para>

        <para>
The complete original paper reference is cited below:
</para>
        <para>
          Modeling the segmentation clock as a network of coupled oscillations in the Notch, Wnt and FGF signaling pathways, Albert Goldbeter and Olivier Pourquie, 2008, <ulink url="http://www.sciencedirect.com/science/journal/00225193">
            <emphasis>Journal of Theoretical Biology</emphasis>
          </ulink>, 252, 574-585. (Full text and PDF versions of the article are available to subscribers on the journal website.)  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;amp;db=PubMed&amp;amp;list_uids=18308339&amp;amp;dopt=Abstract">PubMed ID: 18308339</ulink>
        </para>
		
        <informalfigure float="0" id="fig_reaction_diagram">
          <mediaobject>
            <imageobject>
              <objectinfo>
                <title>cell diagram</title>
              </objectinfo>
              <imagedata fileref="goldbeter_2008.png"/>
            </imageobject>
          </mediaobject>
          <caption>Schematic diagram representing the model for the segmentation clock based on negative feedback loops in the coupled FGF, Wnt and Notch signalling pathways.</caption>
        </informalfigure>
      </sect1>
    </article>
  </documentation>
  
  
  <units name="minute">
    <unit units="second" multiplier="60"/>
  </units>
  
  <units name="first_order_rate_constant">
    <unit units="minute" exponent="-1"/>
  </units>
  
  <units name="second_order_rate_constant">
    <unit units="nanomolar" exponent="-1"/>
    <unit units="minute" exponent="-1"/>
  </units>
  
  <units name="flux">
    <unit units="nanomolar"/>
    <unit units="minute" exponent="-1"/>
  </units>
  
  <units name="nanomolar">
    <unit units="mole" prefix="nano"/>
    <unit units="litre" exponent="-1"/>
  </units>

  
  <component name="environment">
    <variable units="minute" public_interface="out" cmeta:id="environment_time" name="time"/>
  </component>
  
  <!-- Notch signalling module -->
  
  <component name="N" cmeta:id="N">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#N">
        <dc:title>N</dc:title>
        <dcterms:alternative>Notch protein</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable units="nanomolar" public_interface="out" name="N" initial_value="0.5"/>
	
	<variable units="nanomolar" name="KdN" initial_value="1.4"/>
	<variable units="flux" name="vsN" initial_value="0.23"/>
	<variable units="flux" name="vdN" initial_value="2.82"/>
	
	<variable units="first_order_rate_constant" public_interface="in" name="kc"/>
	<variable units="nanomolar" public_interface="in" name="KIF"/>
    <variable units="nanomolar" public_interface="in" name="F"/>
	<variable units="dimensionless" public_interface="in" name="epsilon"/>
	<variable units="dimensionless" public_interface="in" name="j"/>
	<variable units="minute" public_interface="in" name="time"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="1"> 
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>N</ci>
        </apply> 
        <apply>
          <times/>
          <ci> epsilon </ci>
		  <apply>
            <minus/>
		    <ci> vsN </ci>
			<apply>
              <plus/>
              <apply>
                <times/>
			    <ci> vdN </ci>
			    <apply>
                  <divide/>
                  <ci> N </ci>
				  <apply>
                    <plus/>
                    <ci> KdN </ci>
		            <ci> N </ci>
	              </apply>
				</apply>
			  </apply>
			  <apply>
                <times/>
			    <ci> kc </ci>
				<ci> N </ci>
			    <apply>
                  <divide/>
                  <apply>
                    <power/>
                    <ci> KIF </ci>
					<ci> j </ci>
				  </apply>
				  <apply>
                    <plus/>
				    <apply>
                      <power/>
                      <ci> KIF </ci>
					  <ci> j </ci>
				    </apply>
					<apply>
                      <power/>
                      <ci> F </ci>
					  <ci> j </ci>
				    </apply>
                  </apply>
				</apply>
			  </apply>
	        </apply>
		  </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="Na" cmeta:id="Na">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#Na">
        <dc:title>Na</dc:title>
        <dcterms:alternative>cytosolic active Notch protein</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable units="nanomolar" public_interface="out" name="Na" initial_value="0.2"/>
	<variable units="flux" public_interface="out" name="Vtr"/>
	
	<variable units="nanomolar" name="KdNa" initial_value="0.001"/>
	<variable units="flux" name="VdNa" initial_value="0.01"/>
	<variable units="first_order_rate_constant" name="kt1" initial_value="0.1"/>
	<variable units="first_order_rate_constant" name="kt2" initial_value="0.1"/>
	
	<variable units="first_order_rate_constant" public_interface="in" name="kc"/>
	<variable units="nanomolar" public_interface="in" name="N"/>
	<variable units="nanomolar" public_interface="in" name="Nan"/>
    <variable units="nanomolar" public_interface="in" name="KIF"/>
    <variable units="nanomolar" public_interface="in" name="F"/>
	<variable units="dimensionless" public_interface="in" name="epsilon"/>
	<variable units="dimensionless" public_interface="in" name="j"/>
	<variable units="minute" public_interface="in" name="time"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="2"> 
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Na</ci>
        </apply> 
        <apply>
          <times/>
          <ci> epsilon </ci>
		  <apply>
            <minus/>
		    <apply>
              <times/>
			  <ci> kc </ci>
			  <ci> N </ci>
			  <apply>
                <divide/>
                <apply>
                  <power/>
                  <ci> KIF </ci>
			      <ci> j </ci>
			    </apply>
				<apply>
                  <plus/>
				  <apply>
                    <power/>
                    <ci> KIF </ci>
					<ci> j </ci>
				  </apply>
			      <apply>
                    <power/>
                    <ci> F </ci>
				    <ci> j </ci>
				  </apply>
                </apply>
		      </apply>
			</apply>
			<apply>
              <plus/>
              <apply>
                <times/>
			    <ci> VdNa </ci>
			    <apply>
                  <divide/>
                  <ci> Na </ci>
				  <apply>
                    <plus/>
                    <ci> KdNa </ci>
		            <ci> Na </ci>
	              </apply>
				</apply>
			  </apply>
			  <ci> Vtr </ci>
		    </apply>
		  </apply>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="2a"> 
      <apply>
        <eq/>
        <ci>Vtr</ci>
        <apply>
          <minus/>
		  <apply>
            <times/>
	        <ci> kt1 </ci>
		    <ci> Na </ci>
		  </apply>
		  <apply>
            <times/>
	        <ci> kt2 </ci>
		    <ci> Nan </ci>
		  </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="Nan" cmeta:id="Nan">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#Nan">
        <dc:title>Nan</dc:title>
        <dcterms:alternative>nuclear active Notch protein</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable units="nanomolar" public_interface="out" name="Nan" initial_value="0.0"/>
	
	<variable units="nanomolar" name="KdNan" initial_value="0.001"/>
	<variable units="flux" name="VdNan" initial_value="0.1"/>
	
	<variable units="dimensionless" public_interface="in" name="epsilon"/>
	<variable units="flux" public_interface="in" name="Vtr"/>
	<variable units="minute" public_interface="in" name="time"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="3"> 
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Nan</ci>
        </apply> 
        <apply>
          <times/>
          <ci> epsilon </ci>
		  <apply>
            <minus/>
		    <ci> Vtr </ci>
			<apply>
              <times/>
			  <ci> VdNan </ci>
			  <apply>
                <divide/>
                <ci> Nan </ci>
				<apply>
                  <plus/>
                  <ci> KdNan </ci>
		          <ci> Nan </ci>
	            </apply>
		      </apply>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="MF" cmeta:id="MF">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#MF">
        <dc:title>MF</dc:title>
        <dcterms:alternative>Lunatic fringe mRNA</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable units="nanomolar" public_interface="out" name="MF" initial_value="0.1"/>
	
	<variable units="nanomolar" name="KdMF" initial_value="0.768"/>
	<variable units="flux" name="vsF" initial_value="3.0"/>
	<variable units="flux" name="vmF" initial_value="1.92"/>
	<variable units="nanomolar" name="KA" initial_value="0.05"/>
	
	<variable units="nanomolar" public_interface="in" name="Nan"/>
	<variable units="dimensionless" public_interface="in" name="epsilon"/>
	<variable units="dimensionless" public_interface="in" name="p"/>
	<variable units="minute" public_interface="in" name="time"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="4"> 
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>MF</ci>
        </apply> 
        <apply>
          <times/>
          <ci> epsilon </ci>
		  <apply>
            <minus/>
		    <apply>
              <times/>
			  <ci> vsF </ci>
			  <apply>
                <divide/>
                <apply>
                  <power/>
                  <ci> Nan </ci>
			      <ci> p </ci>
			    </apply>
				<apply>
                  <plus/>
				  <apply>
                    <power/>
                    <ci> KA </ci>
					<ci> p </ci>
				  </apply>
			      <apply>
                    <power/>
                    <ci> Nan </ci>
				    <ci> p </ci>
				  </apply>
                </apply>
		      </apply>
			</apply>
			<apply>
              <times/>
			  <ci> vmF </ci>
			  <apply>
                <divide/>
                <ci> MF </ci>
				<apply>
                  <plus/>
                  <ci> KdMF </ci>
		          <ci> MF </ci>
	            </apply>
		      </apply>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="F" cmeta:id="F">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#F">
        <dc:title>F</dc:title>
        <dcterms:alternative>Lunatic fringe protein</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable units="nanomolar" public_interface="out" name="F" initial_value="0.001"/>
	
	<variable units="nanomolar" name="KdF" initial_value="0.37"/>
	<variable units="flux" name="vdF" initial_value="0.39"/>
	<variable units="first_order_rate_constant" name="ksF" initial_value="0.3"/>
	
	<variable units="nanomolar" public_interface="in" name="MF"/>
    <variable units="dimensionless" public_interface="in" name="epsilon"/>
	<variable units="minute" public_interface="in" name="time"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="5"> 
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>F</ci>
        </apply> 
        <apply>
          <times/>
          <ci> epsilon </ci>
		  <apply>
            <minus/>
		    <apply>
              <times/>
			  <ci> ksF </ci>
			  <ci> MF </ci>
			</apply>
			<apply>
              <times/>
			  <ci> vdF </ci>
			  <apply>
                <divide/>
                <ci> F </ci>
				<apply>
                  <plus/>
                  <ci> KdF </ci>
		          <ci> F </ci>
	            </apply>
		      </apply>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <!-- Wnt signalling module -->
  
  <component name="K" cmeta:id="K">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#K">
        <dc:title>K</dc:title>
        <dcterms:alternative>free kinase Gsk3</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable units="nanomolar" public_interface="out" name="K" initial_value="3.0"/>
	
	<variable units="flux" public_interface="in" name="V1"/>
    <variable units="dimensionless" public_interface="in" name="theta"/>
	<variable units="minute" public_interface="in" name="time"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="6"> 
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>K</ci>
        </apply> 
        <apply>
          <times/>
          <ci> theta </ci>
		  <ci> V1 </ci>
		</apply>
	  </apply>
	</math>  
  </component>
  
  <component name="B" cmeta:id="B">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#B">
        <dc:title>B</dc:title>
        <dcterms:alternative>non-phosphorylated beta-catenin</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable units="nanomolar" public_interface="out" name="B" initial_value="0.1"/>
	
	<variable units="first_order_rate_constant" name="kd1" initial_value="0.0"/>
	<variable units="flux" name="vsB" initial_value="0.087"/>
	
	<variable units="flux" public_interface="in" name="VK"/>
	<variable units="flux" public_interface="in" name="VP"/>
	<variable units="flux" public_interface="in" name="V2"/>
	<variable units="nanomolar" public_interface="in" name="Kt"/>
	<variable units="nanomolar" public_interface="in" name="AK"/>
    <variable units="dimensionless" public_interface="in" name="theta"/>
	<variable units="minute" public_interface="in" name="time"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="7"> 
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>B</ci>
        </apply> 
        <apply>
          <times/>
          <ci> theta </ci>
		  <apply>
            <minus/>
		    <apply>
              <plus/>
			  <ci> vsB </ci>
			  <ci> VP </ci>
			  <ci> V2 </ci>
			</apply>
			<apply>
              <plus/>
			  <apply>
                <times/>
			    <ci> VK </ci>
			    <apply>
                  <divide/>
                  <ci> AK </ci>
				  <ci> Kt </ci>
			    </apply>
			  </apply>
			  <apply>
                <times/>
			    <ci> kd1 </ci>
			    <ci> B </ci>
			  </apply>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="Bp" cmeta:id="Bp">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#Bp">
        <dc:title>Bp</dc:title>
        <dcterms:alternative>phosphorylated beta-catenin</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable units="nanomolar" public_interface="out" name="Bp" initial_value="0.1"/>
	
	<variable units="first_order_rate_constant" name="kd2" initial_value="7.062"/>
	
	<variable units="flux" public_interface="in" name="VK"/>
	<variable units="flux" public_interface="in" name="VP"/>
	<variable units="nanomolar" public_interface="in" name="Kt"/>
	<variable units="nanomolar" public_interface="in" name="AK"/>
    <variable units="dimensionless" public_interface="in" name="theta"/>
	<variable units="minute" public_interface="in" name="time"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="8"> 
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Bp</ci>
        </apply> 
        <apply>
          <times/>
          <ci> theta </ci>
		  <apply>
            <minus/>
		    <apply>
              <times/>
			  <ci> VK </ci>
			  <apply>
                <divide/>
                <ci> AK </ci>
				<ci> Kt </ci>
			  </apply>
			</apply>
			<apply>
              <plus/>
			  <ci> VP </ci>
			  <apply>
                <times/>
			    <ci> kd2 </ci>
			    <ci> Bp </ci>
			  </apply>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="BN" cmeta:id="BN">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#BN">
        <dc:title>BN</dc:title>
        <dcterms:alternative>nuclear beta-catenin</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable units="nanomolar" public_interface="out" name="BN" initial_value="0.001"/>
	
	<variable units="flux" public_interface="in" name="V2"/>
    <variable units="dimensionless" public_interface="in" name="theta"/>
	<variable units="minute" public_interface="in" name="time"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="9"> 
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>BN</ci>
        </apply> 
        <apply>
          <minus/>
		  <apply>
            <times/>
            <ci> theta </ci>
		    <ci> V2 </ci>
		  </apply>
		</apply>
	  </apply>
	</math>  
  </component>
  
  <component name="MAx" cmeta:id="MAx">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#MAx">
        <dc:title>MAx</dc:title>
        <dcterms:alternative>Axin2 mRNA</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable units="nanomolar" public_interface="out" name="MAx" initial_value="0.1"/>
	
	<variable units="flux" name="v0" initial_value="0.06"/>
	<variable units="flux" name="vMB" initial_value="1.64"/>
	<variable units="flux" name="vmd" initial_value="0.8"/>
	<variable units="nanomolar" name="KaB" initial_value="0.7"/>
	<variable units="nanomolar" name="Kmd" initial_value="0.48"/>
    <variable units="dimensionless" name="n" initial_value="2.0"/>	
	
	<variable units="nanomolar" public_interface="in" name="BN"/>
	<variable units="dimensionless" public_interface="in" name="theta"/>
	<variable units="minute" public_interface="in" name="time"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="10"> 
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>MAx</ci>
        </apply> 
        <apply>
          <times/>
          <ci> theta </ci>
		  <apply>
            <minus/>
		    <apply>
              <plus/>
			  <ci> v0 </ci>
			  <apply>
                <times/>
			    <ci> vMB </ci>
			    <apply>
                  <divide/>
                  <apply>
                    <power/>
                    <ci> BN </ci>
				    <ci> n </ci>
				  </apply>
				  <apply>
                    <plus/>
				    <apply>
                      <power/>
                      <ci> KaB </ci>
				      <ci> n </ci>
				    </apply>
					<apply>
                      <power/>
                      <ci> BN </ci>
				      <ci> n </ci>
				    </apply>
				  </apply>
			    </apply>
			  </apply>
			</apply>
			<apply>
              <times/>
			  <ci> vmd </ci>
			  <apply>
                <divide/>
                <ci> MAx </ci>
				<apply>
                  <plus/>
			      <ci> Kmd </ci>
			      <ci> MAx </ci>
			    </apply>
			  </apply>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="A" cmeta:id="A">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#A">
        <dc:title>A</dc:title>
        <dcterms:alternative>Axin2 protein</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable units="nanomolar" public_interface="out" name="A" initial_value="0.1"/>
	
	<variable units="first_order_rate_constant" name="ksAx" initial_value="0.02"/>
	<variable units="flux" name="vdAx" initial_value="0.6"/>
	<variable units="nanomolar" name="KdAx" initial_value="0.63"/>
	
	<variable units="flux" public_interface="in" name="V1"/>
	<variable units="nanomolar" public_interface="in" name="MAx"/>
	<variable units="dimensionless" public_interface="in" name="theta"/>
	<variable units="minute" public_interface="in" name="time"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="11"> 
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>A</ci>
        </apply> 
        <apply>
          <times/>
          <ci> theta </ci>
		  <apply>
            <minus/>
		    <apply>
              <plus/>
			  <apply>
                <times/>
			    <ci> ksAx</ci>
				<ci> MAx </ci>
			  </apply>
			  <ci> V1 </ci>
			</apply>
			<apply>
              <times/>
			  <ci> vdAx </ci>
			  <apply>
                <divide/>
                <ci> A </ci>
				<apply>
                  <plus/>
			      <ci> KdAx </ci>
			      <ci> A </ci>
			    </apply>
			  </apply>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="Wnt_parameters">
    <variable units="nanomolar" public_interface="out" name="AK"/>
	<variable units="flux" public_interface="out" name="V1"/>
	<variable units="flux" public_interface="out" name="V2"/>
	<variable units="flux" public_interface="out" name="VK"/>
	<variable units="flux" public_interface="out" name="VP"/>
	<variable units="nanomolar" public_interface="out" name="Kt" initial_value="3.0"/>
	
	<variable units="first_order_rate_constant" name="d1" initial_value="0.1"/>
	<variable units="second_order_rate_constant" name="a1" initial_value="1.8"/>
	<variable units="nanomolar" name="K1" initial_value="0.28"/>
	<variable units="nanomolar" name="K2" initial_value="0.03"/>
	<variable units="nanomolar" name="D" initial_value="2.0"/>
	<variable units="nanomolar" name="KID" initial_value="0.5"/>
	<variable units="first_order_rate_constant" name="kt3" initial_value="0.7"/>
	<variable units="first_order_rate_constant" name="kt4" initial_value="1.5"/>
	<variable units="flux" name="VMK" initial_value="5.08"/>
	<variable units="flux" name="VMP" initial_value="1.0"/>
	
	<variable units="nanomolar" public_interface="in" name="K"/>
	<variable units="nanomolar" public_interface="in" name="A"/>
	<variable units="nanomolar" public_interface="in" name="B"/>
	<variable units="nanomolar" public_interface="in" name="Bp"/>
	<variable units="nanomolar" public_interface="in" name="BN"/>
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="12"> 
      <apply>
        <eq/>
	    <ci> AK </ci>  
		<apply>
          <minus/>
		  <ci> Kt </ci>
		  <ci> K </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="13"> 
      <apply>
        <eq/>
	    <ci> V1 </ci>  
		<apply>
          <minus/>
		  <apply>
            <times/>
			<ci> d1 </ci>
			<ci> AK </ci>
		  </apply>
		  <apply>
            <times/>
			<ci> a1 </ci>
			<ci> A </ci>
		    <ci> K </ci>
	      </apply>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="14"> 
      <apply>
        <eq/>
	    <ci> V2 </ci>  
		<apply>
          <minus/>
		  <apply>
            <times/>
			<ci> kt4 </ci>
			<ci> BN </ci>
		  </apply>
		  <apply>
            <times/>
			<ci> kt3 </ci>
			<ci> B </ci>
		  </apply>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="15"> 
      <apply>
        <eq/>
        <ci>VK</ci>
        <apply>
          <times/>
          <ci> VMK </ci>
		  <apply>
            <divide/>
            <ci> KID </ci>
		    <apply>
              <plus/>
			  <ci> KID </ci>
			  <ci> D </ci>
			</apply>
		  </apply>
		  <apply>
            <divide/>
            <ci> B </ci>
		    <apply>
              <plus/>
			  <ci> K1 </ci>
			  <ci> B </ci>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="16"> 
      <apply>
        <eq/>
        <ci>VP</ci>
        <apply>
          <times/>
          <ci> VMP </ci>
		  <apply>
            <divide/>
            <ci> Bp </ci>
		    <apply>
              <plus/>
			  <ci> K2 </ci>
			  <ci> Bp </ci>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <!-- FGF signalling module -->
  
  <component name="Rasa" cmeta:id="Rasa">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#Rasa">
        <dc:title>Rasa</dc:title>
        <dcterms:alternative>active Ras</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable units="nanomolar" public_interface="out" name="Rasa" initial_value="0.5"/>
	
	<variable units="flux" public_interface="in" name="VaRas"/>
	<variable units="flux" public_interface="in" name="VdRas"/>
	<variable units="dimensionless" public_interface="in" name="eta"/>
	<variable units="minute" public_interface="in" name="time"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="17"> 
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Rasa</ci>
        </apply> 
        <apply>
          <times/>
          <ci> eta </ci>
		  <apply>
            <minus/>
		    <ci> VaRas </ci>
			<ci> VdRas </ci>
	      </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="ERKa" cmeta:id="ERKa">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#ERKa">
        <dc:title>ERKa</dc:title>
        <dcterms:alternative>active ERK</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable units="nanomolar" public_interface="out" name="ERKa" initial_value="0.2"/>
	
	<variable units="flux" public_interface="in" name="VaErk"/>
	<variable units="flux" public_interface="in" name="VdErk"/>
	<variable units="dimensionless" public_interface="in" name="eta"/>
	<variable units="minute" public_interface="in" name="time"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="18"> 
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>ERKa</ci>
        </apply> 
        <apply>
          <times/>
          <ci> eta </ci>
		  <apply>
            <minus/>
		    <ci> VaErk </ci>
			<ci> VdErk </ci>
	      </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="Xa" cmeta:id="Xa">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#Xa">
        <dc:title>Xa</dc:title>
        <dcterms:alternative>active transcription factor X</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable units="nanomolar" public_interface="out" name="Xa" initial_value="0.1"/>
	
	<variable units="flux" public_interface="in" name="VaX"/>
	<variable units="flux" public_interface="in" name="VdX"/>
	<variable units="dimensionless" public_interface="in" name="eta"/>
	<variable units="minute" public_interface="in" name="time"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="19"> 
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Xa</ci>
        </apply> 
        <apply>
          <times/>
          <ci> eta </ci>
		  <apply>
            <minus/>
		    <ci> VaX </ci>
			<ci> VdX </ci>
	      </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="MDusp" cmeta:id="MDusp">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#MDusp">
        <dc:title>MDusp</dc:title>
        <dcterms:alternative>MKP3/Dusp6 mRNA</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable units="nanomolar" public_interface="out" name="MDusp" initial_value="0.1"/>
	
	<variable units="flux" public_interface="in" name="VsMDusp"/>
	<variable units="flux" public_interface="in" name="VdMDusp"/>
	<variable units="dimensionless" public_interface="in" name="eta"/>
	<variable units="minute" public_interface="in" name="time"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="20"> 
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>MDusp</ci>
        </apply> 
        <apply>
          <times/>
          <ci> eta </ci>
		  <apply>
            <minus/>
		    <ci> VsMDusp </ci>
			<ci> VdMDusp </ci>
	      </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="Dusp" cmeta:id="Dusp">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#Dusp">
        <dc:title>Dusp</dc:title>
        <dcterms:alternative>MKP3/Dusp6 protein</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable units="nanomolar" public_interface="out" name="Dusp" initial_value="0.1"/>
	
	<variable units="first_order_rate_constant" name="ksDusp" initial_value="0.5"/>
	<variable units="flux" name="vdDusp" initial_value="2.0"/>
	<variable units="nanomolar" name="KdDusp" initial_value="0.5"/>
	
	<variable units="nanomolar" public_interface="in" name="MDusp"/>
	<variable units="dimensionless" public_interface="in" name="eta"/>
	<variable units="minute" public_interface="in" name="time"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="21"> 
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Dusp</ci>
        </apply> 
        <apply>
          <times/>
          <ci> eta </ci>
		  <apply>
            <minus/>
		    <apply>
              <times/>
			  <ci> ksDusp </ci>
			  <ci> MDusp </ci>
			</apply>
			<apply>
              <times/>
			  <ci> vdDusp </ci>
			  <apply>
                <divide/>
                <ci> Dusp </ci>
				<apply>
                  <plus/>
			      <ci> KdDusp </ci>
			      <ci> Dusp </ci>
			    </apply>
			  </apply>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
  </component>
 
  <component name="FGF_parameters">
    <variable units="flux" public_interface="out" name="VaRas"/>
	<variable units="flux" public_interface="out" name="VdRas"/>
	<variable units="flux" public_interface="out" name="VaErk"/>
	<variable units="flux" public_interface="out" name="VdErk"/>
	<variable units="flux" public_interface="out" name="VaX"/>
	<variable units="flux" public_interface="out" name="VdX"/>
	<variable units="flux" public_interface="out" name="VsMDusp"/>
	<variable units="flux" public_interface="out" name="VdMDusp"/>
	
	<variable units="nanomolar" name="Rasi"/>
	<variable units="nanomolar" name="ERKi"/>
	<variable units="nanomolar" name="Xi"/>
	<variable units="nanomolar" name="Rast" initial_value="2.0"/>
	<variable units="nanomolar" name="ERKt" initial_value="2.0"/>
	<variable units="nanomolar" name="Xt" initial_value="2.0"/>
	<variable units="first_order_rate_constant" name="kcDusp" initial_value="1.35"/>
	<variable units="flux" name="VMaRas" initial_value="4.968"/>
	<variable units="flux" name="VMdRas" initial_value="0.41"/>
	<variable units="flux" name="VMaErk" initial_value="3.30"/>
	<variable units="flux" name="VMaX" initial_value="1.6"/>
	<variable units="flux" name="VMdX" initial_value="0.5"/>
	<variable units="flux" name="VMsMDusp" initial_value="0.9"/>
	<variable units="flux" name="VMdMDusp" initial_value="0.5"/>
	<variable units="nanomolar" name="Fgf" initial_value="1.0"/>
	<variable units="nanomolar" name="KaFgf" initial_value="0.5"/>
	<variable units="nanomolar" name="KaRas" initial_value="0.103"/>
	<variable units="nanomolar" name="KdRas" initial_value="0.1"/>
	<variable units="nanomolar" name="KdErk" initial_value="0.05"/>
	<variable units="nanomolar" name="KaErk" initial_value="0.05"/>
	<variable units="nanomolar" name="KaX" initial_value="0.05"/>
	<variable units="nanomolar" name="KdX" initial_value="0.05"/>
	<variable units="nanomolar" name="KaMDusp" initial_value="0.5"/>
	<variable units="nanomolar" name="KdMDusp" initial_value="0.5"/>
	<variable units="dimensionless" name="q" initial_value="2.0"/>
	<variable units="dimensionless" name="r" initial_value="2.0"/>
	
	<variable units="nanomolar" public_interface="in" name="Rasa"/>
	<variable units="nanomolar" public_interface="in" name="ERKa"/>
	<variable units="nanomolar" public_interface="in" name="Xa"/>
	<variable units="nanomolar" public_interface="in" name="Dusp"/>
	<variable units="nanomolar" public_interface="in" name="MDusp"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="22"> 
      <apply>
        <eq/>
	    <ci> Rasi </ci>  
		<apply>
          <minus/>
		  <ci> Rast </ci>
		  <ci> Rasa </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="23"> 
      <apply>
        <eq/>
	    <ci> VaRas </ci>  
		<apply>
          <times/>
		  <ci> VMaRas </ci>
		  <apply>
            <divide/>
			<apply>
              <power/>
			  <ci> Fgf </ci>
			  <ci> r </ci>
			</apply>
			<apply>
              <plus/>
			  <apply>
                <power/>
			    <ci> KaFgf </ci>
			    <ci> r </ci>
			  </apply>
			  <apply>
                <power/>
			    <ci> Fgf </ci>
			    <ci> r </ci>
			  </apply>
			</apply>
		  </apply>
		  <apply>
            <divide/>
            <ci> Rasi </ci>
		    <apply>
              <plus/>
			  <ci> KaRas </ci>
			  <ci> Rasi </ci>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="24"> 
      <apply>
        <eq/>
	    <ci> VdRas </ci>  
		<apply>
          <times/>
		  <ci> VMdRas </ci>
		  <apply>
            <divide/>
			<ci> Rasa </ci>
		    <apply>
              <plus/>
			  <ci> KdRas </ci>
			  <ci> Rasa </ci>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="25"> 
      <apply>
        <eq/>
	    <ci> ERKi </ci>  
		<apply>
          <minus/>
		  <ci> ERKt </ci>
		  <ci> ERKa </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="26"> 
      <apply>
        <eq/>
	    <ci> VaErk </ci>  
		<apply>
          <times/>
		  <ci> VMaErk </ci>
		  <apply>
            <divide/>
			<ci> Rasa </ci>
			<ci> Rast </ci>
		  </apply>
		  <apply>
            <divide/>
			<ci> ERKi </ci>
		    <apply>
              <plus/>
			  <ci> KaErk </ci>
			  <ci> ERKi </ci>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="27"> 
      <apply>
        <eq/>
	    <ci> VdErk </ci>  
		<apply>
          <times/>
		  <ci> kcDusp </ci>
		  <ci> Dusp </ci>
		  <apply>
            <divide/>
			<ci> ERKa </ci>
		    <apply>
              <plus/>
			  <ci> KdErk </ci>
			  <ci> ERKa </ci>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="28"> 
      <apply>
        <eq/>
	    <ci> Xi </ci>  
		<apply>
          <minus/>
		  <ci> Xt </ci>
		  <ci> Xa </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="29"> 
      <apply>
        <eq/>
	    <ci> VaX </ci>  
		<apply>
          <times/>
		  <ci> VMaX </ci>
		  <apply>
            <divide/>
			<ci> ERKa </ci>
			<ci> ERKt </ci>
		  </apply>
		  <apply>
            <divide/>
			<ci> Xi </ci>
		    <apply>
              <plus/>
			  <ci> KaX </ci>
			  <ci> Xi </ci>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="30"> 
      <apply>
        <eq/>
	    <ci> VdX </ci>  
		<apply>
          <times/>
		  <ci> VMdX </ci>
		  <apply>
            <divide/>
			<ci> Xa </ci>
		    <apply>
              <plus/>
			  <ci> KdX </ci>
			  <ci> Xa </ci>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="31"> 
      <apply>
        <eq/>
	    <ci> VsMDusp </ci>  
		<apply>
          <times/>
		  <ci> VMsMDusp </ci>
		  <apply>
            <divide/>
			<apply>
              <power/>
			  <ci> Xa </ci>
			  <ci> q </ci>
			</apply>
			<apply>
              <plus/>
			  <apply>
                <power/>
			    <ci> KaMDusp </ci>
			    <ci> q </ci>
			  </apply>
			  <apply>
                <power/>
			    <ci> Xa </ci>
			    <ci> q </ci>
			  </apply>
			</apply>
		  </apply>
		</apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="32"> 
      <apply>
        <eq/>
	    <ci> VdMDusp </ci>  
		<apply>
          <times/>
		  <ci> VMdMDusp </ci>
		  <apply>
            <divide/>
			<ci> MDusp </ci>
		    <apply>
              <plus/>
			  <ci> KdMDusp </ci>
			  <ci> MDusp </ci>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
  </component>
	
  <component name="model_parameters">
    <variable units="first_order_rate_constant" public_interface="out" name="kc" initial_value="3.45"/>
	<variable units="nanomolar" public_interface="out" name="KIF" initial_value="0.5"/>
	<variable units="dimensionless" public_interface="out" name="j" initial_value="2.0"/>
	<variable units="dimensionless" public_interface="out" name="p" initial_value="2.0"/>
	<variable units="dimensionless" public_interface="out" name="epsilon" initial_value="0.3"/>
	<variable units="dimensionless" public_interface="out" name="theta" initial_value="1.5"/>
	<variable units="dimensionless" public_interface="out" name="eta" initial_value="0.3"/>
  </component>
  
  <!-- connections -->
  
  <connection>
    <map_components component_2="environment" component_1="N"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Na"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Nan"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="MF"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="F"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="K"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="B"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Bp"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="BN"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="MAx"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="A"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Rasa"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="ERKa"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Xa"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="MDusp"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Dusp"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="N" component_1="model_parameters"/>
    <map_variables variable_2="kc" variable_1="kc"/>
    <map_variables variable_2="KIF" variable_1="KIF"/>
	<map_variables variable_2="j" variable_1="j"/>
	<map_variables variable_2="epsilon" variable_1="epsilon"/>
  </connection> 

  <connection>
    <map_components component_2="N" component_1="F"/>
    <map_variables variable_2="F" variable_1="F"/>
  </connection> 
  
  <connection>
    <map_components component_2="Na" component_1="model_parameters"/>
    <map_variables variable_2="kc" variable_1="kc"/>
    <map_variables variable_2="KIF" variable_1="KIF"/>
	<map_variables variable_2="j" variable_1="j"/>
	<map_variables variable_2="epsilon" variable_1="epsilon"/>
  </connection> 

  <connection>
    <map_components component_2="Na" component_1="F"/>
    <map_variables variable_2="F" variable_1="F"/>
  </connection>

  <connection>
    <map_components component_2="Na" component_1="N"/>
    <map_variables variable_2="N" variable_1="N"/>
  </connection> 
  
  <connection>
    <map_components component_2="Na" component_1="Nan"/>
    <map_variables variable_2="Nan" variable_1="Nan"/>
	<map_variables variable_2="Vtr" variable_1="Vtr"/>
  </connection> 
  
  <connection>
    <map_components component_2="Nan" component_1="model_parameters"/>
    <map_variables variable_2="epsilon" variable_1="epsilon"/>
  </connection>

  <connection>
    <map_components component_2="MF" component_1="model_parameters"/>
    <map_variables variable_2="p" variable_1="p"/>
	<map_variables variable_2="epsilon" variable_1="epsilon"/>
  </connection> 
  
  <connection>
    <map_components component_2="MF" component_1="Nan"/>
    <map_variables variable_2="Nan" variable_1="Nan"/>
  </connection> 
  
  <connection>
    <map_components component_2="F" component_1="model_parameters"/>
    <map_variables variable_2="epsilon" variable_1="epsilon"/>
  </connection> 

  <connection>
    <map_components component_2="F" component_1="MF"/>
    <map_variables variable_2="MF" variable_1="MF"/>
  </connection>
  
  <connection>
    <map_components component_2="K" component_1="model_parameters"/>
    <map_variables variable_2="theta" variable_1="theta"/>
  </connection> 

  <connection>
    <map_components component_2="K" component_1="Wnt_parameters"/>
    <map_variables variable_2="V1" variable_1="V1"/>
	<map_variables variable_2="K" variable_1="K"/>
  </connection>
  
  <connection>
    <map_components component_2="B" component_1="model_parameters"/>
    <map_variables variable_2="theta" variable_1="theta"/>
  </connection> 

  <connection>
    <map_components component_2="B" component_1="Wnt_parameters"/>
    <map_variables variable_2="VK" variable_1="VK"/>
	<map_variables variable_2="VP" variable_1="VP"/>
	<map_variables variable_2="V2" variable_1="V2"/>
	<map_variables variable_2="AK" variable_1="AK"/>
	<map_variables variable_2="B" variable_1="B"/>
	<map_variables variable_2="Kt" variable_1="Kt"/>
  </connection>
  
  <connection>
    <map_components component_2="Bp" component_1="model_parameters"/>
    <map_variables variable_2="theta" variable_1="theta"/>
  </connection> 

  <connection>
    <map_components component_2="Bp" component_1="Wnt_parameters"/>
    <map_variables variable_2="VK" variable_1="VK"/>
	<map_variables variable_2="VP" variable_1="VP"/>
	<map_variables variable_2="AK" variable_1="AK"/>
	<map_variables variable_2="Bp" variable_1="Bp"/>
	<map_variables variable_2="Kt" variable_1="Kt"/>
  </connection>
  
  <connection>
    <map_components component_2="BN" component_1="model_parameters"/>
    <map_variables variable_2="theta" variable_1="theta"/>
  </connection> 

  <connection>
    <map_components component_2="BN" component_1="Wnt_parameters"/>
    <map_variables variable_2="V2" variable_1="V2"/>
	<map_variables variable_2="BN" variable_1="BN"/>
  </connection>
  
  <connection>
    <map_components component_2="MAx" component_1="model_parameters"/>
    <map_variables variable_2="theta" variable_1="theta"/>
  </connection> 

  <connection>
    <map_components component_2="MAx" component_1="BN"/>
    <map_variables variable_2="BN" variable_1="BN"/>
  </connection>
  
  <connection>
    <map_components component_2="A" component_1="model_parameters"/>
    <map_variables variable_2="theta" variable_1="theta"/>
  </connection> 

  <connection>
    <map_components component_2="A" component_1="Wnt_parameters"/>
    <map_variables variable_2="V1" variable_1="V1"/>
	<map_variables variable_2="A" variable_1="A"/>
  </connection>
  
  <connection>
    <map_components component_2="A" component_1="MAx"/>
    <map_variables variable_2="MAx" variable_1="MAx"/>
  </connection>
  
  <connection>
    <map_components component_2="Rasa" component_1="model_parameters"/>
    <map_variables variable_2="eta" variable_1="eta"/>
  </connection> 

  <connection>
    <map_components component_2="Rasa" component_1="FGF_parameters"/>
    <map_variables variable_2="VaRas" variable_1="VaRas"/>
	<map_variables variable_2="VdRas" variable_1="VdRas"/>
	<map_variables variable_2="Rasa" variable_1="Rasa"/>
  </connection>
  
  <connection>
    <map_components component_2="ERKa" component_1="model_parameters"/>
    <map_variables variable_2="eta" variable_1="eta"/>
  </connection> 

  <connection>
    <map_components component_2="ERKa" component_1="FGF_parameters"/>
    <map_variables variable_2="VaErk" variable_1="VaErk"/>
	<map_variables variable_2="VdErk" variable_1="VdErk"/>
	<map_variables variable_2="ERKa" variable_1="ERKa"/>
  </connection>
  
  <connection>
    <map_components component_2="Xa" component_1="model_parameters"/>
    <map_variables variable_2="eta" variable_1="eta"/>
  </connection> 

  <connection>
    <map_components component_2="Xa" component_1="FGF_parameters"/>
    <map_variables variable_2="VaX" variable_1="VaX"/>
	<map_variables variable_2="VdX" variable_1="VdX"/>
	<map_variables variable_2="Xa" variable_1="Xa"/>
  </connection>
  
  <connection>
    <map_components component_2="MDusp" component_1="model_parameters"/>
    <map_variables variable_2="eta" variable_1="eta"/>
  </connection> 

  <connection>
    <map_components component_2="MDusp" component_1="FGF_parameters"/>
    <map_variables variable_2="VsMDusp" variable_1="VsMDusp"/>
	<map_variables variable_2="VdMDusp" variable_1="VdMDusp"/>
	<map_variables variable_2="MDusp" variable_1="MDusp"/>
  </connection>
  
  <connection>
    <map_components component_2="Dusp" component_1="model_parameters"/>
    <map_variables variable_2="eta" variable_1="eta"/>
  </connection> 

  <connection>
    <map_components component_2="Dusp" component_1="MDusp"/>
    <map_variables variable_2="MDusp" variable_1="MDusp"/>
  </connection>
  
  <connection>
    <map_components component_2="Dusp" component_1="FGF_parameters"/>
    <map_variables variable_2="Dusp" variable_1="Dusp"/>
  </connection>


<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#e1067cdc-296c-465f-acec-2025664ae61a">
    <rdf:li rdf:resource="rdf:#5d0d3e19-ea3e-4f72-83a8-aeb3960b12ef"/>
    <rdf:li rdf:resource="rdf:#07b9dc7a-24ea-45a8-aad5-510c6ccc853e"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#52ea8c16-70c9-4388-a4cb-03dec62708a7">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e4968c8c-b561-4a8e-914b-c9793bbd1304">
    <vCard:Given>Albert</vCard:Given>
    <vCard:Family>Goldbeter</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8b169d1b-0b6f-4929-a8c7-1a6a8146fedc">
    <dc:creator rdf:resource="rdf:#132f9831-de3a-45d5-8245-ad54f49bc3a7"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:title>Modeling the segmentation clock as a network of coupled oscillations in the Notch, Wnt and FGF signaling pathways: uncoupled Notch, Wnt and FGF signalling pathways</dc:title>
	<dc:publisher/>
    <cmeta:comment rdf:resource="rdf:#c0cadf9b-becb-4300-8889-c1bd8ff43e83"/>
    <dcterms:created rdf:resource="rdf:#b093354e-f859-40db-a7a6-127bc90936f0"/>
    <dc:creator rdf:resource="rdf:#563ebc44-8bf3-4002-87ed-f5f9e0b51d9d"/>
  </rdf:Description>
  <rdf:Description rdf:about="#goldbeter_model_2008">
    <bqs:reference rdf:parseType="Resource">
        <dc:subject rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>circadian rhythms</rdf:li>
              <rdf:li>signal transduction</rdf:li>
              <rdf:li>oscillator</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>
	  <bqs:reference rdf:resource="rdf:#55b50130-b56c-4f98-b499-7d86549c2732"/>
    <cmeta:comment rdf:resource="rdf:#8b169d1b-0b6f-4929-a8c7-1a6a8146fedc"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7b1770f2-9382-4118-b0ea-e2983fd4cd47">
    <dcterms:W3CDTF>2008-06-07 00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#55b50130-b56c-4f98-b499-7d86549c2732">
    <bqs:Pubmed_id>18308339</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#78656084-775c-494c-9b86-fa4f960afac8"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#34c30d43-55b6-4e78-b704-90f322591e82">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#563ebc44-8bf3-4002-87ed-f5f9e0b51d9d">
    <vCard:ORG rdf:resource="rdf:#e8ea6a6b-9d2c-4952-976f-46063d99c93e"/>
    <vCard:EMAIL rdf:resource="rdf:#34c30d43-55b6-4e78-b704-90f322591e82"/>
    <vCard:N rdf:resource="rdf:#52ea8c16-70c9-4388-a4cb-03dec62708a7"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#19479c7e-d8c6-401f-ba4b-d8df864fec35">
    <dc:title>Journal of Theoretical Biology</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5ec22b02-aa48-4986-a58a-01477bbd810a">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6f043838-10ad-4788-9a5a-9cca75ade160">
    <vCard:Given>Olivier</vCard:Given>
    <vCard:Family>Pourquie</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c0cadf9b-becb-4300-8889-c1bd8ff43e83">
    <dc:creator rdf:resource="rdf:#5ec22b02-aa48-4986-a58a-01477bbd810a"/>
    <rdf:value>This CellML model runs in both PCEnv and COR to recreate the published results.  The units have been checked and they are consistent.  This particular version of the model uncouples the Notch, Wnt and FGF signalling pathways and uses equations A4 and A10 in the appendix rather than A17 and A18.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#132f9831-de3a-45d5-8245-ad54f49bc3a7">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e8ea6a6b-9d2c-4952-976f-46063d99c93e">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#78656084-775c-494c-9b86-fa4f960afac8">
    <dc:creator rdf:resource="rdf:#e1067cdc-296c-465f-acec-2025664ae61a"/>
    <dc:title>Modeling the segmentation clock as a network of coupled oscillations in the Notch, Wnt and FGF signaling pathways</dc:title>
    <bqs:volume>252</bqs:volume>
    <bqs:first_page>574</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#19479c7e-d8c6-401f-ba4b-d8df864fec35"/>
    <dcterms:issued rdf:resource="rdf:#7b1770f2-9382-4118-b0ea-e2983fd4cd47"/>
    <bqs:last_page>585</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b093354e-f859-40db-a7a6-127bc90936f0">
    <dcterms:W3CDTF>2008-09-24T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5d0d3e19-ea3e-4f72-83a8-aeb3960b12ef">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#e4968c8c-b561-4a8e-914b-c9793bbd1304"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#07b9dc7a-24ea-45a8-aad5-510c6ccc853e">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#6f043838-10ad-4788-9a5a-9cca75ade160"/>
  </rdf:Description>
</rdf:RDF>
</model>