// This CellML file was generated on 7/05/2009 at 10:55:42 at a.m. using:
//
// COR (0.9.31.1207)
// Copyright 2002-2009 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// publisher: Auckland Bioengineering Institute
// comment: FN James Lawson; This model has been recoded in CellML without the use of the reaction element. The parameters and differential equations described in the original publication were used. This file is known to read in both COR and PCEnv and is able to reproduce the graphs in Figure 5 of the Kholodenko et al. 1999 publication.
// created: W3CDTF 2007-10-23T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; j.lawson@auckland.ac.nz; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2009-05-07T11:02:11+12:00; Added several more combined concentrations to reproduce all the graphs in figure 5 of the paper; Given Jeelean; Family Lim
// modification: W3CDTF 2007-10-23T15:06:23+13:00; Removed connection duplications, added component defining total concentrations of various species, inc. EGFR, as used in graphs in figure 5 of publication.; Given James; Family Lawson; Other Richard
// reference: Pubmed_id 10514507; Given Boris; Family Kholodenko; Other N; Given Oleg; Family Demin; Other V; Given Gisela; Family Moehren; Given Jan; Family Hoek; Other B; title Quantification of short term signalling by the epidermal growth; volume 274; first_page 30169; title The Journal of Biological Chemistry; W3CDTF 1999-10-15 00:00; last_page 30181
// reference: subject_type keyword; signal transduction; EGF
// comment: FN James Lawson; This file is a CellML description of Kholodenko et al.'s mathematical model of the kinetics of the early response of the EGFR pathway to agonism.
def model kholodenko_demin_moehren_hoek_1999_version03 as
  // Quantification of Short Term Signaling by the Epidermal Growth Factor Receptor
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both COR and OpenCell to reproduce the graphs in Figure 5 of the Kholodenko et al. 1999 publication.
  //
  // Model Structure
  //
  // ABSTRACT: During the past decade, our knowledge of molecular mechanisms involved in growth factor signaling has proliferated almost explosively. However, the kinetics and control of information transfer through signaling networks remain poorly understood. This paper combines experimental kinetic analysis and computational modeling of the short term pattern of cellular responses to epidermal growth factor (EGF) in isolated hepatocytes. The experimental data show transient tyrosine phosphorylation of the EGF receptor (EGFR) and transient or sustained response patterns in multiple signaling proteins targeted by EGFR. Transient responses exhibit pronounced maxima, reached within 15-30 s of EGF stimulation and followed by a decline to relatively low (quasi-steady-state) levels. In contrast to earlier suggestions, we demonstrate that the experimentally observed transients can be accounted for without requiring receptor-mediated activation of specific tyrosine phosphatases, following EGF stimulation. The kinetic model predicts how the cellular response is controlled by the relative levels and activity states of signaling proteins and under what conditions activation patterns are transient or sustained. EGFR signaling patterns appear to be robust with respect to variations in many elemental rate constants within the range of experimentally measured values. On the other hand, we specify which changes in the kinetic scheme, rate constants, and total amounts of molecular factors involved are incompatible with the experimentally observed kinetics of signal transfer. Quantitation of signaling network responses to growth factors allows us to assess how cells process information controlling their growth and differentiation.
  //
  // The original paper reference is cited below:
  //
  // Quantification of Short Term Signaling by the Epidermal Growth Factor Receptor, Boris N. Kholodenko, Oleg V. Demin, Gisela Moehren, and Jan B. Hoek, 1999, The Journal of Biological Chemistry, 274, 30169-30181. PubMed ID: 10514507 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=10514507&dopt=Abstract)
  //
  // reaction diagram
  //
  // Kinetic scheme of EGFR signalling mediated by adapter and target proteins.
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit flux as
    unit nanomolar;
    unit second {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit second {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit nanomolar {expo: -1};
    unit second {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp EGF as
    var EGF: nanomolar {init: 680, pub: out};
    var v1: flux {pub: in};
    var time: second {pub: in};
    ode(EGF, time) = -v1;
  enddef;

  def comp R as
    var R: nanomolar {init: 100, pub: out};
    var v1: flux {pub: in};
    var time: second {pub: in};
    ode(R, time) = -v1;
  enddef;

  def comp Ra as
    var Ra: nanomolar {init: 0, pub: out};
    var v1: flux {pub: in};
    var v2: flux {pub: in};
    var time: second {pub: in};
    ode(Ra, time) = v1-2{dimensionless}*v2;
  enddef;

  def comp R2 as
    var R2: nanomolar {init: 0, pub: out};
    var v2: flux {pub: in};
    var v3: flux {pub: in};
    var v4: flux {pub: in};
    var time: second {pub: in};
    ode(R2, time) = v2+v4-v3;
  enddef;

  def comp RP as
    var RP: nanomolar {init: 0, pub: out};
    var v3: flux {pub: in};
    var v7: flux {pub: in};
    var v11: flux {pub: in};
    var v15: flux {pub: in};
    var v18: flux {pub: in};
    var v20: flux {pub: in};
    var v4: flux {pub: in};
    var v5: flux {pub: in};
    var v9: flux {pub: in};
    var v13: flux {pub: in};
    var time: second {pub: in};
    ode(RP, time) = v3+v7+v11+v15+v18+v20-(v4+v5+v9+v13);
  enddef;

  def comp R_PL as
    var R_PL: nanomolar {init: 0, pub: out};
    var v5: flux {pub: in};
    var v6: flux {pub: in};
    var time: second {pub: in};
    ode(R_PL, time) = v5-v6;
  enddef;

  def comp R_PLP as
    var R_PLP: nanomolar {init: 0, pub: out};
    var v6: flux {pub: in};
    var v7: flux {pub: in};
    var time: second {pub: in};
    ode(R_PLP, time) = v6-v7;
  enddef;

  def comp R_G as
    var R_G: nanomolar {init: 0, pub: out};
    var v9: flux {pub: in};
    var v10: flux {pub: in};
    var time: second {pub: in};
    ode(R_G, time) = v9-v10;
  enddef;

  def comp R_G_S as
    var R_G_S: nanomolar {init: 0, pub: out};
    var v10: flux {pub: in};
    var v11: flux {pub: in};
    var time: second {pub: in};
    ode(R_G_S, time) = v10-v11;
  enddef;

  def comp R_Sh as
    var R_Sh: nanomolar {init: 0, pub: out};
    var v13: flux {pub: in};
    var v14: flux {pub: in};
    var time: second {pub: in};
    ode(R_Sh, time) = v13-v14;
  enddef;

  def comp R_ShP as
    var R_ShP: nanomolar {init: 0, pub: out};
    var v14: flux {pub: in};
    var v24: flux {pub: in};
    var v15: flux {pub: in};
    var v17: flux {pub: in};
    var time: second {pub: in};
    ode(R_ShP, time) = v14-(v24+v15+v17);
  enddef;

  def comp R_Sh_G as
    var R_Sh_G: nanomolar {init: 0, pub: out};
    var v17: flux {pub: in};
    var v18: flux {pub: in};
    var v19: flux {pub: in};
    var time: second {pub: in};
    ode(R_Sh_G, time) = v17-(v18+v19);
  enddef;

  def comp R_Sh_G_S as
    var R_Sh_G_S: nanomolar {init: 0, pub: out};
    var v19: flux {pub: in};
    var v20: flux {pub: in};
    var v24: flux {pub: in};
    var time: second {pub: in};
    ode(R_Sh_G_S, time) = v19+v24-v20;
  enddef;

  def comp G_S as
    var G_S: nanomolar {init: 0, pub: out};
    var v11: flux {pub: in};
    var v23: flux {pub: in};
    var v12: flux {pub: in};
    var v24: flux {pub: in};
    var time: second {pub: in};
    ode(G_S, time) = v11+v23-(v12+v24);
  enddef;

  def comp ShP as
    var ShP: nanomolar {init: 0, pub: out};
    var v15: flux {pub: in};
    var v23: flux {pub: in};
    var v21: flux {pub: in};
    var v16: flux {pub: in};
    var time: second {pub: in};
    ode(ShP, time) = v15+v23-(v21+v16);
  enddef;

  def comp Sh_G as
    var Sh_G: nanomolar {init: 0, pub: out};
    var v18: flux {pub: in};
    var v21: flux {pub: in};
    var v22: flux {pub: in};
    var time: second {pub: in};
    ode(Sh_G, time) = v18+v21-v22;
  enddef;

  def comp Sh_G_S as
    var Sh_G_S: nanomolar {init: 0, pub: out};
    var v20: flux {pub: in};
    var v22: flux {pub: in};
    var v23: flux {pub: in};
    var time: second {pub: in};
    ode(Sh_G_S, time) = v20+v22-v23;
  enddef;

  def comp PLC_gamma as
    var PLC_gamma: nanomolar {init: 105, pub: out};
    var v8: flux {pub: in};
    var v5: flux {pub: in};
    var time: second {pub: in};
    ode(PLC_gamma, time) = v8-v5;
  enddef;

  def comp PLC_gamma_P as
    var PLC_gamma_P: nanomolar {init: 0, pub: out};
    var v7: flux {pub: in};
    var v8: flux {pub: in};
    var v25: flux {pub: in};
    var time: second {pub: in};
    ode(PLC_gamma_P, time) = v7-(v8+v25);
  enddef;

  def comp PLC_gamma_P_I as
    var PLC_gamma_P_I: nanomolar {init: 0, pub: out};
    var v25: flux {pub: in};
    var time: second {pub: in};
    ode(PLC_gamma_P_I, time) = v25;
  enddef;

  def comp Grb as
    var Grb: nanomolar {init: 85, pub: out};
    var v12: flux {pub: in};
    var v9: flux {pub: in};
    var v17: flux {pub: in};
    var v21: flux {pub: in};
    var time: second {pub: in};
    ode(Grb, time) = v12-(v9+v17+v21);
  enddef;

  def comp Shc as
    var Shc: nanomolar {init: 150, pub: out};
    var v16: flux {pub: in};
    var v13: flux {pub: in};
    var time: second {pub: in};
    ode(Shc, time) = v16-v13;
  enddef;

  def comp SOS as
    var SOS: nanomolar {init: 34, pub: out};
    var v12: flux {pub: in};
    var v10: flux {pub: in};
    var v19: flux {pub: in};
    var v22: flux {pub: in};
    var time: second {pub: in};
    ode(SOS, time) = v12-(v10+v19+v22);
  enddef;

  def comp v1 as
    var v1: flux {pub: out};
    var R: nanomolar {pub: in};
    var EGF: nanomolar {pub: in};
    var Ra: nanomolar {pub: in};
    var k1: second_order_rate_constant {init: 0.003};
    var k1_: first_order_rate_constant {init: 0.06};
    v1 = k1*R*EGF-k1_*Ra;
  enddef;

  def comp v2 as
    var v2: flux {pub: out};
    var R2: nanomolar {pub: in};
    var Ra: nanomolar {pub: in};
    var k2: second_order_rate_constant {init: 0.01};
    var k2_: first_order_rate_constant {init: 0.1};
    v2 = k2*Ra*Ra-k2_*R2;
  enddef;

  def comp v3 as
    var v3: flux {pub: out};
    var R2: nanomolar {pub: in};
    var RP: nanomolar {pub: in};
    var k3: first_order_rate_constant {init: 1};
    var k3_: first_order_rate_constant {init: 0.01};
    v3 = k3*R2-k3_*RP;
  enddef;

  def comp v4 as
    var v4: flux {pub: out};
    var RP: nanomolar {pub: in};
    var K4: nanomolar {init: 50};
    var V4: flux {init: 450};
    v4 = V4*RP/(K4+RP);
  enddef;

  def comp v5 as
    var v5: flux {pub: out};
    var R_PL: nanomolar {pub: in};
    var PLC_gamma: nanomolar {pub: in};
    var RP: nanomolar {pub: in};
    var k5: second_order_rate_constant {init: 0.06};
    var k5_: first_order_rate_constant {init: 0.2};
    v5 = k5*RP*PLC_gamma-k5_*R_PL;
  enddef;

  def comp v6 as
    var v6: flux {pub: out};
    var R_PL: nanomolar {pub: in};
    var R_PLP: nanomolar {pub: in};
    var k6: first_order_rate_constant {init: 1};
    var k6_: first_order_rate_constant {init: 0.05};
    v6 = k6*R_PL-k6_*R_PLP;
  enddef;

  def comp v7 as
    var v7: flux {pub: out};
    var R_PLP: nanomolar {pub: in};
    var PLC_gamma_P: nanomolar {pub: in};
    var RP: nanomolar {pub: in};
    var k7: first_order_rate_constant {init: 0.3};
    var k7_: second_order_rate_constant {init: 0.006};
    v7 = k7*R_PLP-k7_*RP*PLC_gamma_P;
  enddef;

  def comp v8 as
    var v8: flux {pub: out};
    var PLC_gamma_P: nanomolar {pub: in};
    var K8: nanomolar {init: 100};
    var V8: flux {init: 1};
    v8 = V8*PLC_gamma_P/(K8+PLC_gamma_P);
  enddef;

  def comp v9 as
    var v9: flux {pub: out};
    var R_G: nanomolar {pub: in};
    var Grb: nanomolar {pub: in};
    var RP: nanomolar {pub: in};
    var k9: second_order_rate_constant {init: 0.003};
    var k9_: first_order_rate_constant {init: 0.05};
    v9 = k9*RP*Grb-k9_*R_G;
  enddef;

  def comp v10 as
    var v10: flux {pub: out};
    var R_G_S: nanomolar {pub: in};
    var SOS: nanomolar {pub: in};
    var R_G: nanomolar {pub: in};
    var k10: second_order_rate_constant {init: 0.01};
    var k10_: first_order_rate_constant {init: 0.06};
    v10 = k10*R_G*SOS-k10_*R_G_S;
  enddef;

  def comp v11 as
    var v11: flux {pub: out};
    var R_G_S: nanomolar {pub: in};
    var G_S: nanomolar {pub: in};
    var RP: nanomolar {pub: in};
    var k11: first_order_rate_constant {init: 0.03};
    var k11_: second_order_rate_constant {init: 4.5e-3};
    v11 = k11*R_G_S-k11_*RP*G_S;
  enddef;

  def comp v12 as
    var v12: flux {pub: out};
    var G_S: nanomolar {pub: in};
    var SOS: nanomolar {pub: in};
    var Grb: nanomolar {pub: in};
    var k12: first_order_rate_constant {init: 1.5e-3};
    var k12_: second_order_rate_constant {init: 1e-4};
    v12 = k12*G_S-k12_*Grb*SOS;
  enddef;

  def comp v13 as
    var v13: flux {pub: out};
    var R_Sh: nanomolar {pub: in};
    var Shc: nanomolar {pub: in};
    var RP: nanomolar {pub: in};
    var k13: second_order_rate_constant {init: 0.09};
    var k13_: first_order_rate_constant {init: 0.6};
    v13 = k13*RP*Shc-k13_*R_Sh;
  enddef;

  def comp v14 as
    var v14: flux {pub: out};
    var R_Sh: nanomolar {pub: in};
    var R_ShP: nanomolar {pub: in};
    var k14: first_order_rate_constant {init: 6};
    var k14_: first_order_rate_constant {init: 0.06};
    v14 = k14*R_Sh-k14_*R_ShP;
  enddef;

  def comp v15 as
    var v15: flux {pub: out};
    var R_ShP: nanomolar {pub: in};
    var RP: nanomolar {pub: in};
    var ShP: nanomolar {pub: in};
    var k15: first_order_rate_constant {init: 0.3};
    var k15_: second_order_rate_constant {init: 9e-4};
    v15 = k15*R_ShP-k15_*ShP*RP;
  enddef;

  def comp v16 as
    var v16: flux {pub: out};
    var ShP: nanomolar {pub: in};
    var K16: nanomolar {init: 340};
    var V16: flux {init: 1.7};
    v16 = V16*ShP/(K16+ShP);
  enddef;

  def comp v17 as
    var v17: flux {pub: out};
    var R_ShP: nanomolar {pub: in};
    var Grb: nanomolar {pub: in};
    var R_Sh_G: nanomolar {pub: in};
    var k17: second_order_rate_constant {init: 0.003};
    var k17_: first_order_rate_constant {init: 0.1};
    v17 = k17*R_ShP*Grb-k17_*R_Sh_G;
  enddef;

  def comp v18 as
    var v18: flux {pub: out};
    var R_Sh_G: nanomolar {pub: in};
    var RP: nanomolar {pub: in};
    var Sh_G: nanomolar {pub: in};
    var k18: first_order_rate_constant {init: 0.3};
    var k18_: second_order_rate_constant {init: 9e-4};
    v18 = k18*R_Sh_G-k18_*RP*Sh_G;
  enddef;

  def comp v19 as
    var v19: flux {pub: out};
    var R_Sh_G_S: nanomolar {pub: in};
    var SOS: nanomolar {pub: in};
    var R_Sh_G: nanomolar {pub: in};
    var k19: second_order_rate_constant {init: 0.01};
    var k19_: first_order_rate_constant {init: 2.14e-2};
    v19 = k19*R_Sh_G*SOS-k19_*R_Sh_G_S;
  enddef;

  def comp v20 as
    var v20: flux {pub: out};
    var Sh_G_S: nanomolar {pub: in};
    var RP: nanomolar {pub: in};
    var R_Sh_G_S: nanomolar {pub: in};
    var k20: first_order_rate_constant {init: 0.12};
    var k20_: second_order_rate_constant {init: 2.4e-4};
    v20 = k20*R_Sh_G_S-k20_*Sh_G_S*RP;
  enddef;

  def comp v21 as
    var v21: flux {pub: out};
    var Sh_G: nanomolar {pub: in};
    var Grb: nanomolar {pub: in};
    var ShP: nanomolar {pub: in};
    var k21: second_order_rate_constant {init: 0.003};
    var k21_: first_order_rate_constant {init: 0.1};
    v21 = k21*ShP*Grb-k21_*Sh_G;
  enddef;

  def comp v22 as
    var v22: flux {pub: out};
    var Sh_G_S: nanomolar {pub: in};
    var SOS: nanomolar {pub: in};
    var Sh_G: nanomolar {pub: in};
    var k22: second_order_rate_constant {init: 0.03};
    var k22_: first_order_rate_constant {init: 0.064};
    v22 = k22*Sh_G*SOS-k22_*Sh_G_S;
  enddef;

  def comp v23 as
    var v23: flux {pub: out};
    var G_S: nanomolar {pub: in};
    var ShP: nanomolar {pub: in};
    var Sh_G_S: nanomolar {pub: in};
    var k23: first_order_rate_constant {init: 0.1};
    var k23_: second_order_rate_constant {init: 0.021};
    v23 = k23*Sh_G_S-k23_*ShP*G_S;
  enddef;

  def comp v24 as
    var v24: flux {pub: out};
    var R_Sh_G_S: nanomolar {pub: in};
    var G_S: nanomolar {pub: in};
    var R_ShP: nanomolar {pub: in};
    var k24: second_order_rate_constant {init: 0.009};
    var k24_: first_order_rate_constant {init: 4.29e-2};
    v24 = k24*R_ShP*G_S-k24_*R_Sh_G_S;
  enddef;

  def comp v25 as
    var v25: flux {pub: out};
    var PLC_gamma_P: nanomolar {pub: in};
    var PLC_gamma_P_I: nanomolar {pub: in};
    var k25: first_order_rate_constant {init: 1};
    var k25_: first_order_rate_constant {init: 0.03};
    v25 = k25*PLC_gamma_P-k25_*PLC_gamma_P_I;
  enddef;

  def comp combined_concs as
    var totEGFRphos: nanomolar;
    var RP: nanomolar {pub: in};
    var R_PL: nanomolar {pub: in};
    var R_PLP: nanomolar {pub: in};
    var R_G: nanomolar {pub: in};
    var R_G_S: nanomolar {pub: in};
    var R_Sh: nanomolar {pub: in};
    var R_ShP: nanomolar {pub: in};
    var R_Sh_G: nanomolar {pub: in};
    var R_Sh_G_S: nanomolar {pub: in};
    var totPLCgammaphos: nanomolar;
    var PLC_gamma_P: nanomolar {pub: in};
    var ShP: nanomolar {pub: in};
    var Sh_G: nanomolar {pub: in};
    var Sh_G_S: nanomolar {pub: in};
    var totGrb_EGFR: nanomolar;
    var totGrb_Shc: nanomolar;
    var totShcphos: nanomolar;
    var totShc_EGFR: nanomolar;
    var totSOS_EGFR: nanomolar;
    totEGFRphos = 2{dimensionless}*(RP+R_PL+R_PLP+R_G+R_G_S+R_Sh+R_ShP+R_Sh_G+R_Sh_G_S);
    totPLCgammaphos = R_PLP+PLC_gamma_P;
    totShcphos = R_ShP+R_Sh_G+R_Sh_G_S+ShP+Sh_G+Sh_G_S;
    totGrb_EGFR = R_G+R_G_S+R_Sh_G+R_Sh_G_S;
    totGrb_Shc = R_Sh_G+Sh_G+R_Sh_G_S+Sh_G_S;
    totShc_EGFR = R_ShP+R_Sh_G+R_Sh_G_S;
    totSOS_EGFR = R_G_S+R_Sh_G_S;
  enddef;
  def map between EGF and v1 for
    vars EGF and EGF;
    vars v1 and v1;
  enddef;
  def map between R and v1 for
    vars R and R;
    vars v1 and v1;
  enddef;
  def map between Ra and v1 for
    vars Ra and Ra;
    vars v1 and v1;
  enddef;
  def map between Ra and v2 for
    vars Ra and Ra;
    vars v2 and v2;
  enddef;
  def map between R2 and v2 for
    vars R2 and R2;
    vars v2 and v2;
  enddef;
  def map between R2 and v3 for
    vars R2 and R2;
    vars v3 and v3;
  enddef;
  def map between R2 and v4 for
    vars v4 and v4;
  enddef;
  def map between RP and v3 for
    vars RP and RP;
    vars v3 and v3;
  enddef;
  def map between RP and v7 for
    vars RP and RP;
    vars v7 and v7;
  enddef;
  def map between RP and v11 for
    vars RP and RP;
    vars v11 and v11;
  enddef;
  def map between RP and v15 for
    vars RP and RP;
    vars v15 and v15;
  enddef;
  def map between RP and v18 for
    vars RP and RP;
    vars v18 and v18;
  enddef;
  def map between RP and v20 for
    vars RP and RP;
    vars v20 and v20;
  enddef;
  def map between RP and v4 for
    vars RP and RP;
    vars v4 and v4;
  enddef;
  def map between RP and v5 for
    vars RP and RP;
    vars v5 and v5;
  enddef;
  def map between RP and v9 for
    vars RP and RP;
    vars v9 and v9;
  enddef;
  def map between RP and v13 for
    vars RP and RP;
    vars v13 and v13;
  enddef;
  def map between R_PL and v5 for
    vars R_PL and R_PL;
    vars v5 and v5;
  enddef;
  def map between R_PL and v6 for
    vars R_PL and R_PL;
    vars v6 and v6;
  enddef;
  def map between R_PLP and v6 for
    vars R_PLP and R_PLP;
    vars v6 and v6;
  enddef;
  def map between R_PLP and v7 for
    vars R_PLP and R_PLP;
    vars v7 and v7;
  enddef;
  def map between R_G and v9 for
    vars R_G and R_G;
    vars v9 and v9;
  enddef;
  def map between R_G and v10 for
    vars R_G and R_G;
    vars v10 and v10;
  enddef;
  def map between R_G_S and v10 for
    vars R_G_S and R_G_S;
    vars v10 and v10;
  enddef;
  def map between R_G_S and v11 for
    vars R_G_S and R_G_S;
    vars v11 and v11;
  enddef;
  def map between R_Sh and v13 for
    vars R_Sh and R_Sh;
    vars v13 and v13;
  enddef;
  def map between R_Sh and v14 for
    vars R_Sh and R_Sh;
    vars v14 and v14;
  enddef;
  def map between R_ShP and v14 for
    vars R_ShP and R_ShP;
    vars v14 and v14;
  enddef;
  def map between R_ShP and v24 for
    vars R_ShP and R_ShP;
    vars v24 and v24;
  enddef;
  def map between R_ShP and v15 for
    vars R_ShP and R_ShP;
    vars v15 and v15;
  enddef;
  def map between R_ShP and v17 for
    vars R_ShP and R_ShP;
    vars v17 and v17;
  enddef;
  def map between R_Sh_G and v17 for
    vars R_Sh_G and R_Sh_G;
    vars v17 and v17;
  enddef;
  def map between R_Sh_G and v18 for
    vars R_Sh_G and R_Sh_G;
    vars v18 and v18;
  enddef;
  def map between R_Sh_G and v19 for
    vars R_Sh_G and R_Sh_G;
    vars v19 and v19;
  enddef;
  def map between R_Sh_G_S and v19 for
    vars R_Sh_G_S and R_Sh_G_S;
    vars v19 and v19;
  enddef;
  def map between R_Sh_G_S and v20 for
    vars R_Sh_G_S and R_Sh_G_S;
    vars v20 and v20;
  enddef;
  def map between R_Sh_G_S and v24 for
    vars R_Sh_G_S and R_Sh_G_S;
    vars v24 and v24;
  enddef;
  def map between G_S and v11 for
    vars G_S and G_S;
    vars v11 and v11;
  enddef;
  def map between G_S and v23 for
    vars G_S and G_S;
    vars v23 and v23;
  enddef;
  def map between G_S and v12 for
    vars G_S and G_S;
    vars v12 and v12;
  enddef;
  def map between G_S and v24 for
    vars G_S and G_S;
    vars v24 and v24;
  enddef;
  def map between Sh_G_S and v20 for
    vars Sh_G_S and Sh_G_S;
    vars v20 and v20;
  enddef;
  def map between Sh_G_S and v22 for
    vars Sh_G_S and Sh_G_S;
    vars v22 and v22;
  enddef;
  def map between Sh_G_S and v23 for
    vars Sh_G_S and Sh_G_S;
    vars v23 and v23;
  enddef;
  def map between ShP and v15 for
    vars ShP and ShP;
    vars v15 and v15;
  enddef;
  def map between ShP and v23 for
    vars ShP and ShP;
    vars v23 and v23;
  enddef;
  def map between ShP and v21 for
    vars ShP and ShP;
    vars v21 and v21;
  enddef;
  def map between ShP and v16 for
    vars ShP and ShP;
    vars v16 and v16;
  enddef;
  def map between Sh_G and v18 for
    vars Sh_G and Sh_G;
    vars v18 and v18;
  enddef;
  def map between Sh_G and v21 for
    vars Sh_G and Sh_G;
    vars v21 and v21;
  enddef;
  def map between Sh_G and v22 for
    vars Sh_G and Sh_G;
    vars v22 and v22;
  enddef;
  def map between PLC_gamma and v8 for
    vars v8 and v8;
  enddef;
  def map between PLC_gamma and v5 for
    vars PLC_gamma and PLC_gamma;
    vars v5 and v5;
  enddef;
  def map between PLC_gamma_P and v7 for
    vars PLC_gamma_P and PLC_gamma_P;
    vars v7 and v7;
  enddef;
  def map between PLC_gamma_P and v8 for
    vars PLC_gamma_P and PLC_gamma_P;
    vars v8 and v8;
  enddef;
  def map between PLC_gamma_P and v25 for
    vars PLC_gamma_P and PLC_gamma_P;
    vars v25 and v25;
  enddef;
  def map between PLC_gamma_P_I and v25 for
    vars PLC_gamma_P_I and PLC_gamma_P_I;
    vars v25 and v25;
  enddef;
  def map between Grb and v12 for
    vars Grb and Grb;
    vars v12 and v12;
  enddef;
  def map between Grb and v9 for
    vars Grb and Grb;
    vars v9 and v9;
  enddef;
  def map between Grb and v17 for
    vars Grb and Grb;
    vars v17 and v17;
  enddef;
  def map between Grb and v21 for
    vars Grb and Grb;
    vars v21 and v21;
  enddef;
  def map between Shc and v16 for
    vars v16 and v16;
  enddef;
  def map between Shc and v13 for
    vars Shc and Shc;
    vars v13 and v13;
  enddef;
  def map between SOS and v12 for
    vars SOS and SOS;
    vars v12 and v12;
  enddef;
  def map between SOS and v10 for
    vars SOS and SOS;
    vars v10 and v10;
  enddef;
  def map between SOS and v19 for
    vars SOS and SOS;
    vars v19 and v19;
  enddef;
  def map between SOS and v22 for
    vars SOS and SOS;
    vars v22 and v22;
  enddef;
  def map between EGF and environment for
    vars time and time;
  enddef;
  def map between R and environment for
    vars time and time;
  enddef;
  def map between Ra and environment for
    vars time and time;
  enddef;
  def map between R2 and environment for
    vars time and time;
  enddef;
  def map between RP and environment for
    vars time and time;
  enddef;
  def map between R_PL and environment for
    vars time and time;
  enddef;
  def map between R_PLP and environment for
    vars time and time;
  enddef;
  def map between R_G and environment for
    vars time and time;
  enddef;
  def map between R_G_S and environment for
    vars time and time;
  enddef;
  def map between R_Sh and environment for
    vars time and time;
  enddef;
  def map between R_ShP and environment for
    vars time and time;
  enddef;
  def map between R_Sh_G and environment for
    vars time and time;
  enddef;
  def map between R_Sh_G_S and environment for
    vars time and time;
  enddef;
  def map between G_S and environment for
    vars time and time;
  enddef;
  def map between ShP and environment for
    vars time and time;
  enddef;
  def map between Sh_G and environment for
    vars time and time;
  enddef;
  def map between PLC_gamma and environment for
    vars time and time;
  enddef;
  def map between PLC_gamma_P and environment for
    vars time and time;
  enddef;
  def map between PLC_gamma_P_I and environment for
    vars time and time;
  enddef;
  def map between Grb and environment for
    vars time and time;
  enddef;
  def map between Shc and environment for
    vars time and time;
  enddef;
  def map between SOS and environment for
    vars time and time;
  enddef;
  def map between Sh_G_S and environment for
    vars time and time;
  enddef;
  def map between RP and combined_concs for
    vars RP and RP;
  enddef;
  def map between R_PL and combined_concs for
    vars R_PL and R_PL;
  enddef;
  def map between R_PLP and combined_concs for
    vars R_PLP and R_PLP;
  enddef;
  def map between R_G and combined_concs for
    vars R_G and R_G;
  enddef;
  def map between R_G_S and combined_concs for
    vars R_G_S and R_G_S;
  enddef;
  def map between R_Sh and combined_concs for
    vars R_Sh and R_Sh;
  enddef;
  def map between R_ShP and combined_concs for
    vars R_ShP and R_ShP;
  enddef;
  def map between R_Sh_G and combined_concs for
    vars R_Sh_G and R_Sh_G;
  enddef;
  def map between R_Sh_G_S and combined_concs for
    vars R_Sh_G_S and R_Sh_G_S;
  enddef;
  def map between PLC_gamma_P and combined_concs for
    vars PLC_gamma_P and PLC_gamma_P;
  enddef;
  def map between ShP and combined_concs for
    vars ShP and ShP;
  enddef;
  def map between Sh_G and combined_concs for
    vars Sh_G and Sh_G;
  enddef;
  def map between Sh_G_S and combined_concs for
    vars Sh_G_S and Sh_G_S;
  enddef;
enddef;
