<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  maly_model_2004_raw.xml

CREATED :  26th February 2004

LAST MODIFIED : 26th February 2004

AUTHOR :  Catherine Lloyd
          The Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
                10th August 2001, and the 16/01/2002 CellML Metadata 1.0
                Specification.

DESCRIPTION :  This file contains a CellML description of Maly et al's 2004 computational model analysis of self-organisation of polarised cell signalling via autocrine circuits.

CHANGES:  
  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:pathway_editor="http://www.physiome.com/pathway_editor/1.0#" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" pathway_editor:rendering_config_file="maly_model_2004_CellMLrender.xml" cmeta:id="maly_wiley_lauffenburger_2004_version01" name="maly_wiley_lauffenburger_2004_version01">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>A Computational Model Analysis of the Self-Organisation of Polarised Cell Signalling via Autocrine Circuits</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This model contains partial differentials and as such can not currently be solved by existing CellML tools.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
Autocrine cells both produce signalling modelcules and respond to them.  AN example of an autocrine system is signalling through epidermal growth factor (EGF) receptor (EGFR).  A cell releases EGFR ligands into its environment, and a fraction of the released ligand is recaptured by the receptors at the cell surface.  The activated receptors then trigger a signal transduction cascade, whose effects range from cell proliferation to cell migration behaviour.  An additional effect can be the further production of EGFR ligands, producing a positive feedback loop which results in a sustained activity of the autocrine signalling circuit.  If, as hypothesised, this sustained autoendocrine circuit is localised within a defined domain of the cell, then it may contribute to the intrinsic cell polarity or assymmetry.  
</para>

<para>
The difficulty associated with the experimental investigation of autoendocrine signalling makes computational modelling especially valuable when trying to deduce nature of the molecular mechanisms underlying signalling circuits.  In the Maly <emphasis>et al.</emphasis> 2004 publication described here, the authors develop and analyse a dymanic computational model of autocrine EGFR signalling.  Their description is based on integrating select elements from the models of  <ulink url="${HTML_EXMPL_KHOLODENKO_MODEL}">Kholodenko <emphasis>et al.</emphasis>, Quantification of EGF Receptor Signalling, 1999</ulink>, and of <ulink url="${HTML_EXMPL_MAPK_CASCADE}">Huang and Ferrell, MAPK Cascade, 1996</ulink>, into the existing model of EGFR aurocrine signalling bt Shvartsman <emphasis>et al.</emphasis>, 2002. 
</para>

<para>
It should be noted that although the original Maly <emphasis>et al.</emphasis> model is a spatially distributed dynamic computational model, the spatial parameters in this CellML description have been removed, as CellML is currently unable to handle spatial parameters.  The model is still dynamic.      
</para>

<para>
The complete original paper reference is cited below:
</para>

<para>
<ulink url="http://www.biophysj.org/cgi/content/abstract/86/1/10">Self-Organization of Polarized Cell Signaling via Autocrine Circuits: Computational Model Analysis</ulink>, Ivan V. Maly, H. Steven Wiley, and Douglas A. Lauffenburger, 2004, <ulink url="http://www.biophysj.org/">
            <emphasis>Biophysical Journal</emphasis>
          </ulink>, 86, 10-22.  (<ulink url="http://www.biophysj.org/cgi/content/full/86/1/10">Full text (HTML)</ulink> and <ulink url="http://www.biophysj.org/cgi/reprint/86/1/10.pdf">PDF</ulink> versions of the article are available on the <emphasis>Biophysical Journal</emphasis> website.)  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=14695245&amp;dopt=Abstract">PubMed ID: 14695245</ulink>
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>reaction diagram</title>
    </objectinfo>
    <imagedata fileref="maly_2004.png"/>
  </imageobject>
</mediaobject>
<caption>Components of the autocrine EGFR signalling system and their interactions in the model.  Transport, covalent modifications, and protein binding processes are shown by solid arrows.  Catalysation is shown by a dashed arrow.  EGFR is a receptor of ligand L; Gbr2 is an adaptor protein; Sos is an activator protein, Raf, MEK and ERK are protein kinases; p denotes the phosphorylated form of a protein and pp is a double-phosphorylated form.</caption>
</informalfigure>

<para>
Model siumulations supported the hypothesis that autocrine EGFR siganlling circuits could contribute to the generation and/or maintainance of intrinsic cell spatial polarity, possibly realted to migration as ell as tissue organisation.
</para>

</sect1>
</article>
</documentation>
  
  

  <units name="molar">
    <unit units="mole"/>
    <unit units="litre" exponent="-1"/>
  </units>

  <units name="flux">
     <unit units="molar"/>
     <unit units="second" exponent="-1"/>
  </units>

  <units name="first_order_rate_constant">
    <unit units="second" exponent="-1"/>
  </units>

  <units name="second_order_rate_constant">
    <unit units="molar" exponent="-1"/>
    <unit units="second" exponent="-1"/>
  </units>

  <units name="m2_per_s">
    <unit units="metre" exponent="2"/>
    <unit units="second" exponent="-1"/>
  </units>
  
  <units name="per_m2">
    <unit units="metre" exponent="-2"/>
  </units>
  
  <units name="per_m2_per_s">
    <unit units="metre" exponent="-2"/>
    <unit units="second" exponent="-1"/>
  </units>
   
  
  <component name="environment">
    <variable units="second" public_interface="out" name="time"/>
  </component>
  
  <component cmeta:id="L" name="L">
    <rdf:RDF>
      <rdf:Description rdf:about="L">
        <dc:title>L</dc:title>
        <dcterms:alternative>extracellular concentration of EGFR ligand</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable units="molar" public_interface="out" name="L" initial_value="1.0E-9"/>
    
    <variable units="m2_per_s" name="DL" initial_value="1.0E-12"/>
    
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <partialdiff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>L</ci> 
        </apply>
        <apply>
          <times/>
          <ci> DL </ci>
          <ci> L </ci>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="R" name="R">
    <rdf:RDF>
      <rdf:Description rdf:about="R">
        <dc:title>R</dc:title>
        <dcterms:alternative>surface density of EGFR</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable units="per_m2" public_interface="out" name="R" initial_value="2.0E16"/>
    
    <variable units="second_order_rate_constant" public_interface="in" name="kon"/>
    <variable units="first_order_rate_constant" public_interface="in" name="koff"/>
    <variable units="per_m2" public_interface="in" name="C"/>
    <variable units="molar" public_interface="in" name="L"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <partialdiff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>R</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> koff </ci>
            <ci> C </ci>
          </apply>
          <apply>
            <times/>
            <ci> kon </ci>
            <ci> R </ci>
            <ci> L </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="C" name="C">
    <rdf:RDF>
      <rdf:Description rdf:about="C">
        <dc:title>C</dc:title>
        <dcterms:alternative>surface density of ligand-receptor complexes</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable units="per_m2" public_interface="out" name="C" initial_value="2.0E16"/>
    
    <variable units="second_order_rate_constant" public_interface="in" name="kon"/>
    <variable units="first_order_rate_constant" public_interface="in" name="koff"/>
    <variable units="second_order_rate_constant" public_interface="in" name="kagc"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kdgc"/>
    <variable units="second_order_rate_constant" public_interface="in" name="kagsc"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kdgsc"/>
    <variable units="per_m2" public_interface="in" name="R"/>
    <variable units="molar" public_interface="in" name="L"/>
    <variable units="molar" public_interface="in" name="Grb"/>
    <variable units="molar" public_interface="in" name="CGrb"/>
    <variable units="molar" public_interface="in" name="GrbSos"/>
    <variable units="molar" public_interface="in" name="CGrbSos"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <partialdiff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>C</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> kon </ci>
              <ci> R </ci>
              <ci> L </ci>
            </apply>
            <apply>
              <times/>
              <ci> kdgc </ci>
              <ci> CGrb </ci>
            </apply>
            <apply>
              <times/>
              <ci> kdgsc </ci>
              <ci> CGrbSos </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> koff </ci>
              <ci> C </ci>
            </apply>
            <apply>
              <times/>
              <ci> kagc </ci>
              <ci> Grb </ci>
              <ci> C </ci>
            </apply>
            <apply>
              <times/>
              <ci> kagsc </ci>
              <ci> GrbSos </ci>
              <ci> CGrb </ci>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="CGrb" name="CGrb">
    <rdf:RDF>
      <rdf:Description rdf:about="CGrb">
        <dc:title>CGrb</dc:title>
        <dcterms:alternative>surface density of extracellular ligand-receptor-Grb2 complex</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable units="molar" public_interface="out" name="CGrb" initial_value="0.0"/>
    
    <variable units="second_order_rate_constant" public_interface="in" name="kagc"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kdgc"/>
    <variable units="second_order_rate_constant" public_interface="in" name="kasc"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kdsc"/>
    <variable units="per_m2" public_interface="in" name="C"/>
    <variable units="molar" public_interface="in" name="Grb"/>
    <variable units="molar" public_interface="in" name="Sos"/>
    <variable units="molar" public_interface="in" name="CGrbSos"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <partialdiff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>CGrb</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> kagc </ci>
              <ci> Grb </ci>
              <ci> C </ci>
            </apply>
            <apply>
              <times/>
              <ci> kdsc </ci>
              <ci> CGrbSos </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> kdgc </ci>
              <ci> CGrb </ci>
            </apply>
            <apply>
              <times/>
              <ci> kasc </ci>
              <ci> Sos </ci>
              <ci> CGrb </ci>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="CGrbSos" name="CGrbSos">
    <rdf:RDF>
      <rdf:Description rdf:about="CGrbSos">
        <dc:title>CGrbSos</dc:title>
        <dcterms:alternative>surface density of extracellular ligand-receptor-Grb2-Sos complex</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable units="molar" public_interface="out" name="CGrbSos" initial_value="0.0"/>
    
    <variable units="second_order_rate_constant" public_interface="in" name="kasc"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kdsc"/>
    <variable units="second_order_rate_constant" public_interface="in" name="kagsc"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kdgsc"/>
    <variable units="per_m2" public_interface="in" name="C"/>
    <variable units="molar" public_interface="in" name="GrbSos"/>
    <variable units="molar" public_interface="in" name="Sos"/>
    <variable units="molar" public_interface="in" name="CGrb"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <partialdiff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>CGrbSos</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> kagsc </ci>
              <ci> GrbSos </ci>
              <ci> C </ci>
            </apply>
            <apply>
              <times/>
              <ci> kasc </ci>
              <ci> Sos </ci>
              <ci> CGrb </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> kdgsc </ci>
              <ci> CGrbSos </ci>
            </apply>
            <apply>
              <times/>
              <ci> kdsc </ci>
              <ci> CGrbSos </ci>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="Grb" name="Grb">
    <rdf:RDF>
      <rdf:Description rdf:about="Grb">
        <dc:title>Grb</dc:title>
        <dcterms:alternative>Grb2 concentration</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable units="molar" public_interface="out" name="Grb" initial_value="5.0E-8"/>
    
    <variable units="second_order_rate_constant" public_interface="in" name="kasg"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kdsg"/>
    <variable units="m2_per_s" public_interface="in" name="D"/>
    <variable units="molar" public_interface="in" name="GrbSos"/>
    <variable units="molar" public_interface="in" name="Sos"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <partialdiff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>Grb</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> kdsg </ci>
              <ci> GrbSos </ci>
            </apply>
            <apply>
              <times/>
              <ci> D </ci>
              <ci> Grb </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> kasg </ci>
            <ci> Sos </ci>
            <ci> Grb </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="Sos" name="Sos">
    <rdf:RDF>
      <rdf:Description rdf:about="Sos">
        <dc:title>Sos</dc:title>
        <dcterms:alternative>Sos concentration</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable units="molar" public_interface="out" name="Sos" initial_value="5.0E-8"/>
    
    <variable units="second_order_rate_constant" public_interface="in" name="kasg"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kdsg"/>
    <variable units="second_order_rate_constant" public_interface="in" name="kps"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kdps"/>
    <variable units="m2_per_s" public_interface="in" name="D"/>
    <variable units="molar" public_interface="in" name="Grb"/>
    <variable units="molar" public_interface="in" name="GrbSos"/>
    <variable units="molar" public_interface="in" name="pSos"/>
    <variable units="molar" public_interface="in" name="ppERK"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <partialdiff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>Sos</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> D </ci>
              <ci> Sos </ci>
            </apply>
            <apply>
              <times/>
              <ci> kdsg </ci>
              <ci> GrbSos </ci>
            </apply>
            <apply>
              <times/>
              <ci> kdps </ci>
              <ci> pSos </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> kasg </ci>
              <ci> Sos </ci>
              <ci> Grb </ci>
            </apply>
            <apply>
              <times/>
              <ci> kps </ci>
              <ci> ppERK </ci>
              <ci> Sos </ci>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="GrbSos" name="GrbSos">
    <rdf:RDF>
      <rdf:Description rdf:about="GrbSos">
        <dc:title>GrbSos</dc:title>
        <dcterms:alternative>Grb2-Sos complex concentration</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable units="molar" public_interface="out" name="GrbSos" initial_value="0.0"/>
    
    <variable units="second_order_rate_constant" public_interface="in" name="kasg"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kdsg"/>
    <variable units="m2_per_s" public_interface="in" name="D"/>
    <variable units="molar" public_interface="in" name="Grb"/>
    <variable units="molar" public_interface="in" name="Sos"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <partialdiff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>GrbSos</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> D </ci>
              <ci> GrbSos </ci>
            </apply>
            <apply>
              <times/>
              <ci> kasg </ci>
              <ci> Grb </ci>
              <ci> Sos </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> kdsg </ci>
            <ci> GrbSos </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="pSos" name="pSos">
    <rdf:RDF>
      <rdf:Description rdf:about="pSos">
        <dc:title>pSos</dc:title>
        <dcterms:alternative>phophorylated Sos concentration</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable units="molar" public_interface="out" name="pSos" initial_value="0.0"/>
    
    <variable units="second_order_rate_constant" public_interface="in" name="kps"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kdps"/>
    <variable units="m2_per_s" public_interface="in" name="D"/>
    <variable units="molar" public_interface="in" name="ppERK"/>
    <variable units="molar" public_interface="in" name="Sos"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <partialdiff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>pSos</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> D </ci>
              <ci> pSos </ci>
            </apply>
            <apply>
              <times/>
              <ci> kps </ci>
              <ci> ppERK </ci>
              <ci> Sos </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> kdps </ci>
            <ci> pSos </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="pRaf" name="pRaf">
    <rdf:RDF>
      <rdf:Description rdf:about="pRaf">
        <dc:title>pRaf</dc:title>
        <dcterms:alternative>phosphorylated Raf concentration</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable units="molar" public_interface="out" name="pRaf" initial_value="0.0"/>
    
    <variable units="molar" name="K2" initial_value="8.0E-9"/>
    <variable units="flux" name="V2" initial_value="7.5E-9"/>
    
    <variable units="m2_per_s" public_interface="in" name="D"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <partialdiff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>pRaf</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> D </ci>
            <ci> pRaf </ci>
          </apply>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> V2 </ci>
              <ci> pRaf </ci>
            </apply>
            <apply>
              <plus/>
              <ci> K2 </ci>
              <ci> pRaf </ci>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="pMEK" name="pMEK">
    <rdf:RDF>
      <rdf:Description rdf:about="pMEK">
        <dc:title>pMEK</dc:title>
        <dcterms:alternative>phosphorylated MEK concentration</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable units="molar" public_interface="out" name="pMEK" initial_value="0.0"/>
    
    <variable units="molar" name="MEKtot" initial_value="3.0E-7"/>
    <variable units="first_order_rate_constant" name="k3" initial_value="0.75"/>
    <variable units="molar" name="K3" initial_value="1.5E-8"/>
    <variable units="molar" name="K6" initial_value="1.5E-8"/>
    <variable units="flux" name="V6" initial_value="2.25E-8"/>
    
    <variable units="molar" public_interface="in" name="K4"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k4"/>
    <variable units="molar" public_interface="in" name="K5"/>
    <variable units="flux" public_interface="in" name="V5"/>
    <variable units="molar" public_interface="in" name="ppMEK"/>
    <variable units="molar" public_interface="in" name="pRaf"/>
    <variable units="m2_per_s" public_interface="in" name="D"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <partialdiff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>pMEK</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> D </ci>
              <ci> pMEK </ci>
            </apply>
            <apply>
              <divide/>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <ci> k3 </ci>
                  <ci> pRaf </ci>
                  <ci> MEKtot </ci>
                </apply>
                <apply>
                  <plus/>
                  <ci> pMEK </ci>
                  <ci> ppMEK </ci>
                </apply>
              </apply>
              <apply>
                <plus/>
                <ci> K3 </ci>
                <apply>
                  <minus/>
                  <ci> MEKtot </ci>
                  <apply>
                    <plus/>
                    <ci> pMEK </ci>
                    <ci> ppMEK </ci>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <divide/>
              <apply>
                <times/>
                <ci> V5 </ci>
                <ci> ppMEK </ci>
              </apply>
              <apply>
                <plus/>
                <ci> K5 </ci>
                <ci> ppMEK </ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <divide/>
              <apply>
                <times/>
                <ci> k4 </ci>
                <ci> pRaf </ci>
                <ci> pMEK </ci>
              </apply>
              <apply>
                <plus/>
                <ci> K4 </ci>
                <ci> pMEK </ci>
              </apply>
            </apply>
            <apply>
              <divide/>
              <apply>
                <times/>
                <ci> V6 </ci>
                <ci> pMEK </ci>
              </apply>
              <apply>
                <plus/>
                <ci> K6 </ci>
                <ci> pMEK </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="ppMEK" name="ppMEK">
    <rdf:RDF>
      <rdf:Description rdf:about="ppMEK">
        <dc:title>ppMEK</dc:title>
        <dcterms:alternative>bisphosphorylated MEK concentration</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable units="molar" public_interface="out" name="ppMEK" initial_value="0.0"/>
    
    <variable units="molar" public_interface="in" name="K4"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k4"/>
    <variable units="molar" public_interface="in" name="K5"/>
    <variable units="flux" public_interface="in" name="V5"/>
    <variable units="molar" public_interface="in" name="pMEK"/>
    <variable units="molar" public_interface="in" name="pRaf"/>
    <variable units="m2_per_s" public_interface="in" name="D"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <partialdiff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>ppMEK</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> D </ci>
              <ci> ppMEK </ci>
            </apply>
            <apply>
              <divide/>
              <apply>
                <times/>
                <ci> k4 </ci>
                <ci> pRaf </ci>
                <ci> pMEK </ci>
              </apply>
              <apply>
                <plus/>
                <ci> K4 </ci>
                <ci> pMEK </ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> V5 </ci>
              <ci> ppMEK </ci>
            </apply>
            <apply>
              <plus/>
              <ci> K5 </ci>
              <ci> ppMEK </ci>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="pERK" name="pERK">
    <rdf:RDF>
      <rdf:Description rdf:about="pERK">
        <dc:title>pERK</dc:title>
        <dcterms:alternative>phosphorylated ERK concentration</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable units="molar" public_interface="out" name="pERK" initial_value="0.0"/>
    
    <variable units="molar" name="ERKtot" initial_value="3.0E-7"/>
    <variable units="first_order_rate_constant" name="k7" initial_value="0.75"/>
    <variable units="molar" name="K7" initial_value="1.5E-8"/>
    <variable units="molar" name="K10" initial_value="1.5E-8"/>
    <variable units="flux" name="V10" initial_value="1.0E-8"/>
    
    <variable units="molar" public_interface="in" name="K8"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k8"/>
    <variable units="molar" public_interface="in" name="K9"/>
    <variable units="flux" public_interface="in" name="V9"/>
    <variable units="molar" public_interface="in" name="ppERK"/>
    <variable units="molar" public_interface="in" name="ppMEK"/>
    <variable units="m2_per_s" public_interface="in" name="D"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <partialdiff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>pERK</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> D </ci>
              <ci> pERK </ci>
            </apply>
            <apply>
              <divide/>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <ci> k7 </ci>
                  <ci> ppMEK </ci>
                  <ci> ERKtot </ci>
                </apply>
                <apply>
                  <plus/>
                  <ci> pERK </ci>
                  <ci> ppERK </ci>
                </apply>
              </apply>
              <apply>
                <plus/>
                <ci> K7 </ci>
                <apply>
                  <minus/>
                  <ci> ERKtot </ci>
                  <apply>
                    <plus/>
                    <ci> pERK </ci>
                    <ci> ppERK </ci>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <divide/>
              <apply>
                <times/>
                <ci> V9 </ci>
                <ci> ppERK </ci>
              </apply>
              <apply>
                <plus/>
                <ci> K9 </ci>
                <ci> ppERK </ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <divide/>
              <apply>
                <times/>
                <ci> k8 </ci>
                <ci> ppMEK </ci>
                <ci> pERK </ci>
              </apply>
              <apply>
                <plus/>
                <ci> K8 </ci>
                <ci> pERK </ci>
              </apply>
            </apply>
            <apply>
              <divide/>
              <apply>
                <times/>
                <ci> V10 </ci>
                <ci> pERK </ci>
              </apply>
              <apply>
                <plus/>
                <ci> K10 </ci>
                <ci> pERK </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="ppERK" name="ppERK">
    <rdf:RDF>
      <rdf:Description rdf:about="ppERK">
        <dc:title>ppERK</dc:title>
        <dcterms:alternative>bisphosphorylated ERK concentration</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable units="molar" public_interface="out" name="ppERK" initial_value="0.0"/>
    
    <variable units="molar" public_interface="in" name="K8"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k8"/>
    <variable units="molar" public_interface="in" name="K9"/>
    <variable units="flux" public_interface="in" name="V9"/>
    <variable units="molar" public_interface="in" name="pERK"/>
    <variable units="molar" public_interface="in" name="ppMEK"/>
    <variable units="m2_per_s" public_interface="in" name="D"/>
    <variable units="second" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <partialdiff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>ppERK</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> D </ci>
              <ci> ppERK </ci>
            </apply>
            <apply>
              <divide/>
              <apply>
                <times/>
                <ci> k8 </ci>
                <ci> ppMEK </ci>
                <ci> pERK </ci>
              </apply>
              <apply>
                <plus/>
                <ci> K8 </ci>
                <ci> pERK </ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> V9 </ci>
              <ci> ppERK </ci>
            </apply>
            <apply>
              <plus/>
              <ci> K9 </ci>
              <ci> ppERK </ci>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="parameters">
    <variable units="second_order_rate_constant" public_interface="out" name="kon" initial_value="1.67E6"/>
    <variable units="first_order_rate_constant" public_interface="out" name="koff" initial_value="1.67E-3"/>
    <variable units="second_order_rate_constant" public_interface="out" name="kasg" initial_value="1.0E5"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kdsg" initial_value="1.5E-3"/>
    <variable units="second_order_rate_constant" public_interface="out" name="kagc" initial_value="3.0E6"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kdgc" initial_value="5.0E-2"/>
    <variable units="second_order_rate_constant" public_interface="out" name="kagsc" initial_value="4.5E6"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kdgsc" initial_value="3.0E-2"/>
    <variable units="second_order_rate_constant" public_interface="out" name="kasc" initial_value="1.0E7"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kdsc" initial_value="6.0E-2"/>
    <variable units="second_order_rate_constant" public_interface="out" name="kps" initial_value="1.0E9"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kdps" initial_value="1.0E-3"/>
    <variable units="m2_per_s" public_interface="out" name="D" initial_value="1.0E-12"/>
    <variable units="molar" public_interface="out" name="K4" initial_value="1.5E-8"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k4" initial_value="0.75"/>
    <variable units="molar" public_interface="out" name="K5" initial_value="1.5E-8"/>
    <variable units="flux" public_interface="out" name="V5" initial_value="2.25E-8"/>
    <variable units="molar" public_interface="out" name="K8" initial_value="1.5E-8"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k8" initial_value="0.75"/>
    <variable units="molar" public_interface="out" name="K9" initial_value="1.5E-8"/>
    <variable units="flux" public_interface="out" name="V9" initial_value="1.0E-8"/>
  </component>
  
  
  <connection>
    <map_components component_2="environment" component_1="L"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="R"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="C"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="CGrb"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="CGrbSos"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Grb"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Sos"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="GrbSos"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="pSos"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="pRaf"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection> 
  
  <connection>
    <map_components component_2="environment" component_1="pMEK"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="ppMEK"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="pERK"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="ppERK"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="parameters" component_1="R"/>
    <map_variables variable_2="kon" variable_1="kon"/>
    <map_variables variable_2="koff" variable_1="koff"/>
  </connection>
  
  <connection>
    <map_components component_2="parameters" component_1="C"/>
    <map_variables variable_2="kon" variable_1="kon"/>
    <map_variables variable_2="koff" variable_1="koff"/>
    <map_variables variable_2="kagc" variable_1="kagc"/>
    <map_variables variable_2="kdgc" variable_1="kdgc"/>
    <map_variables variable_2="kagsc" variable_1="kagsc"/>
    <map_variables variable_2="kdgsc" variable_1="kdgsc"/>
  </connection>
  
  <connection>
    <map_components component_2="parameters" component_1="CGrb"/>
    <map_variables variable_2="kagc" variable_1="kagc"/>
    <map_variables variable_2="kdgc" variable_1="kdgc"/>
    <map_variables variable_2="kasc" variable_1="kasc"/>
    <map_variables variable_2="kdsc" variable_1="kdsc"/>
  </connection>
  
  <connection>
    <map_components component_2="parameters" component_1="CGrbSos"/>
    <map_variables variable_2="kagsc" variable_1="kagsc"/>
    <map_variables variable_2="kdgsc" variable_1="kdgsc"/>
    <map_variables variable_2="kasc" variable_1="kasc"/>
    <map_variables variable_2="kdsc" variable_1="kdsc"/>
  </connection>
  
  <connection>
    <map_components component_2="parameters" component_1="Grb"/>
    <map_variables variable_2="kasg" variable_1="kasg"/>
    <map_variables variable_2="kdsg" variable_1="kdsg"/>
    <map_variables variable_2="D" variable_1="D"/>
  </connection>
  
  <connection>
    <map_components component_2="parameters" component_1="Sos"/>
    <map_variables variable_2="kasg" variable_1="kasg"/>
    <map_variables variable_2="kdsg" variable_1="kdsg"/>
    <map_variables variable_2="kps" variable_1="kps"/>
    <map_variables variable_2="kdps" variable_1="kdps"/>
    <map_variables variable_2="D" variable_1="D"/>
  </connection>
  
  <connection>
    <map_components component_2="parameters" component_1="GrbSos"/>
    <map_variables variable_2="kasg" variable_1="kasg"/>
    <map_variables variable_2="kdsg" variable_1="kdsg"/>
    <map_variables variable_2="D" variable_1="D"/>
  </connection>
  
  <connection>
    <map_components component_2="parameters" component_1="pSos"/>
    <map_variables variable_2="kps" variable_1="kps"/>
    <map_variables variable_2="kdps" variable_1="kdps"/>
    <map_variables variable_2="D" variable_1="D"/>
  </connection>
  
  <connection>
    <map_components component_2="parameters" component_1="pRaf"/>
    <map_variables variable_2="D" variable_1="D"/>
  </connection>
  
  <connection>
    <map_components component_2="parameters" component_1="pMEK"/>
    <map_variables variable_2="k4" variable_1="k4"/>
    <map_variables variable_2="K4" variable_1="K4"/>
    <map_variables variable_2="V5" variable_1="V5"/>
    <map_variables variable_2="K5" variable_1="K5"/>
    <map_variables variable_2="D" variable_1="D"/>
  </connection>
  
  <connection>
    <map_components component_2="parameters" component_1="ppMEK"/>
    <map_variables variable_2="k4" variable_1="k4"/>
    <map_variables variable_2="K4" variable_1="K4"/>
    <map_variables variable_2="V5" variable_1="V5"/>
    <map_variables variable_2="K5" variable_1="K5"/>
    <map_variables variable_2="D" variable_1="D"/>
  </connection>
  
  <connection>
    <map_components component_2="parameters" component_1="pERK"/>
    <map_variables variable_2="k8" variable_1="k8"/>
    <map_variables variable_2="K8" variable_1="K8"/>
    <map_variables variable_2="V9" variable_1="V9"/>
    <map_variables variable_2="K9" variable_1="K9"/>
    <map_variables variable_2="D" variable_1="D"/>
  </connection>
  
  <connection>
    <map_components component_2="parameters" component_1="ppERK"/>
    <map_variables variable_2="k8" variable_1="k8"/>
    <map_variables variable_2="K8" variable_1="K8"/>
    <map_variables variable_2="V9" variable_1="V9"/>
    <map_variables variable_2="K9" variable_1="K9"/>
    <map_variables variable_2="D" variable_1="D"/>
  </connection>
  
  <connection>
    <map_components component_2="L" component_1="R"/>
    <map_variables variable_2="L" variable_1="L"/>
  </connection>
  
  <connection>
    <map_components component_2="C" component_1="R"/>
    <map_variables variable_2="C" variable_1="C"/>
    <map_variables variable_2="R" variable_1="R"/>
  </connection>
  
  <connection>
    <map_components component_2="L" component_1="C"/>
    <map_variables variable_2="L" variable_1="L"/>
  </connection>
  
  <connection>
    <map_components component_2="Grb" component_1="C"/>
    <map_variables variable_2="Grb" variable_1="Grb"/>
  </connection>
  
  <connection>
    <map_components component_2="CGrb" component_1="C"/>
    <map_variables variable_2="CGrb" variable_1="CGrb"/>
    <map_variables variable_2="C" variable_1="C"/>
  </connection>
  
  <connection>
    <map_components component_2="CGrbSos" component_1="C"/>
    <map_variables variable_2="CGrbSos" variable_1="CGrbSos"/>
    <map_variables variable_2="C" variable_1="C"/>
  </connection>
  
  <connection>
    <map_components component_2="GrbSos" component_1="C"/>
    <map_variables variable_2="GrbSos" variable_1="GrbSos"/>
  </connection>
  
  <connection>
    <map_components component_2="Grb" component_1="CGrb"/>
    <map_variables variable_2="Grb" variable_1="Grb"/>
  </connection>
  
  <connection>
    <map_components component_2="Sos" component_1="CGrb"/>
    <map_variables variable_2="Sos" variable_1="Sos"/>
  </connection>
  
  <connection>
    <map_components component_2="CGrbSos" component_1="CGrb"/>
    <map_variables variable_2="CGrbSos" variable_1="CGrbSos"/>
    <map_variables variable_2="CGrb" variable_1="CGrb"/>
  </connection>
  
  <connection>
    <map_components component_2="GrbSos" component_1="CGrbSos"/>
    <map_variables variable_2="GrbSos" variable_1="GrbSos"/>
  </connection>
  
  <connection>
    <map_components component_2="Sos" component_1="CGrbSos"/>
    <map_variables variable_2="Sos" variable_1="Sos"/>
  </connection>
  
  <connection>
    <map_components component_2="Sos" component_1="Grb"/>
    <map_variables variable_2="Sos" variable_1="Sos"/>
    <map_variables variable_2="Grb" variable_1="Grb"/>
  </connection>
  
  <connection>
    <map_components component_2="GrbSos" component_1="Grb"/>
    <map_variables variable_2="GrbSos" variable_1="GrbSos"/>
    <map_variables variable_2="Grb" variable_1="Grb"/>
  </connection>
  
  <connection>
    <map_components component_2="GrbSos" component_1="Sos"/>
    <map_variables variable_2="GrbSos" variable_1="GrbSos"/>
    <map_variables variable_2="Sos" variable_1="Sos"/>
  </connection>
  
  <connection>
    <map_components component_2="ppERK" component_1="Sos"/>
    <map_variables variable_2="ppERK" variable_1="ppERK"/>
  </connection>
  
  <connection>
    <map_components component_2="pSos" component_1="Sos"/>
    <map_variables variable_2="pSos" variable_1="pSos"/>
    <map_variables variable_2="Sos" variable_1="Sos"/>
  </connection>
  
  <connection>
    <map_components component_2="ppERK" component_1="pSos"/>
    <map_variables variable_2="ppERK" variable_1="ppERK"/>
  </connection>
  
  <connection>
    <map_components component_2="pRaf" component_1="pMEK"/>
    <map_variables variable_2="pRaf" variable_1="pRaf"/>
  </connection>
  
  <connection>
    <map_components component_2="ppMEK" component_1="pMEK"/>
    <map_variables variable_2="ppMEK" variable_1="ppMEK"/>
    <map_variables variable_2="pMEK" variable_1="pMEK"/>
  </connection>
  
  <connection>
    <map_components component_2="pRaf" component_1="ppMEK"/>
    <map_variables variable_2="pRaf" variable_1="pRaf"/>
  </connection>
  
  <connection>
    <map_components component_2="ppMEK" component_1="pERK"/>
    <map_variables variable_2="ppMEK" variable_1="ppMEK"/>
  </connection>
  
  <connection>
    <map_components component_2="ppERK" component_1="pERK"/>
    <map_variables variable_2="ppERK" variable_1="ppERK"/>
    <map_variables variable_2="pERK" variable_1="pERK"/>
  </connection>
  
  <connection>
    <map_components component_2="ppMEK" component_1="ppERK"/>
    <map_variables variable_2="ppMEK" variable_1="ppMEK"/>
  </connection>


<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  <rdf:Bag rdf:about="rdf:#2fcc4e03-84ba-46d1-94cd-dd3c1174fea0">
    <rdf:li>MAPK cascade</rdf:li>
    <rdf:li>polarised signaling</rdf:li>
    <rdf:li>autocrine</rdf:li>
    <rdf:li>signal transduction</rdf:li>
    <rdf:li>signal transductions</rdf:li>
    <rdf:li>mapk</rdf:li>
    <rdf:li>Autocrine Cell</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#1e7126c5-e667-4d7f-87a4-21913bed1616">
    <rdf:li rdf:resource="rdf:#58cb5abf-b84e-4b2f-8146-af1ba1f542eb"/>
    <rdf:li rdf:resource="rdf:#5db0ef9f-eae3-46dc-b2cd-d0fb8d6e8e2e"/>
    <rdf:li rdf:resource="rdf:#4304401d-b838-4321-b102-3be46d1830d9"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#3040f478-acba-45d3-9174-e0a44399a927">
    <dc:creator rdf:resource="rdf:#924e87c4-1945-4eb5-b66d-46adf277c663"/>
    <rdf:value>
          Below is a CellML description of Maly et al's 2004 computational model analysis of self-organisation of polarised cell signalling via autocrine circuits.
        </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#58cb5abf-b84e-4b2f-8146-af1ba1f542eb">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#ba40be76-f45b-44c8-afe6-389d63ceb99d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#32cc39dc-6c80-46d5-9e20-c61339e71610">
    <vCard:Given>H</vCard:Given>
    <vCard:Family>Wiley</vCard:Family>
    <vCard:Other>Steven</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="#maly_wiley_lauffenburger_2004_version01">
    <dc:title>
        Maly et al's 2004 computational model analysis of self-organisation of polarised cell signalling via autocrine circuits.
      </dc:title>
    <cmeta:bio_entity>Autocrine Cell</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#3040f478-acba-45d3-9174-e0a44399a927"/>
    <bqs:reference rdf:resource="rdf:#aa995716-87f3-494f-9107-e1d30bac20dd"/>
    <bqs:reference rdf:resource="rdf:#c06b6976-0eed-43e0-a4b7-b1daa116f739"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e82553a3-4ae0-4bc3-9440-570cb495254c">
    <dc:creator rdf:resource="rdf:#1e7126c5-e667-4d7f-87a4-21913bed1616"/>
    <dc:title>
            Self-Organization of Polarized Cell Signaling via Autocrine Circuits: Computational Model Analysis
          </dc:title>
    <bqs:volume>86</bqs:volume>
    <bqs:first_page>10</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#ee20eeda-fcfb-4b39-85b5-c743cef4785a"/>
    <dcterms:issued rdf:resource="rdf:#5345b324-baf1-4f75-aec0-618862ef86aa"/>
    <bqs:last_page>22</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher>
        The University of Auckland, Bioengineering Institute
      </dc:publisher>
    <dcterms:created rdf:resource="rdf:#66a19feb-07c5-4914-b15a-72b735dbdd6f"/>
    <dc:creator rdf:resource="rdf:#117bcbb2-d02f-4f52-adf0-73ecb844042b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#117bcbb2-d02f-4f52-adf0-73ecb844042b">
    <vCard:ORG rdf:resource="rdf:#6978d1c0-a249-42c4-b84d-82e1f1efb984"/>
    <vCard:EMAIL rdf:resource="rdf:#cb8d9f5a-6c6d-47ec-8cd4-21e84daf8c03"/>
    <vCard:N rdf:resource="rdf:#b395e886-e7bb-483a-a274-4ba6db9395d1"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6978d1c0-a249-42c4-b84d-82e1f1efb984">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ee20eeda-fcfb-4b39-85b5-c743cef4785a">
    <dc:title>Biophysical Journal</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#cb8d9f5a-6c6d-47ec-8cd4-21e84daf8c03">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ba40be76-f45b-44c8-afe6-389d63ceb99d">
    <vCard:Given>Ivan</vCard:Given>
    <vCard:Family>Maly</vCard:Family>
    <vCard:Other>V</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5733b7ec-aaba-4f47-91cc-4f7e5673fee8">
    <vCard:Given>Douglas</vCard:Given>
    <vCard:Family>Lauffenburger</vCard:Family>
    <vCard:Other>A</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3caaf065-7097-42ff-830e-339313914aee">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#2fcc4e03-84ba-46d1-94cd-dd3c1174fea0"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b395e886-e7bb-483a-a274-4ba6db9395d1">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c06b6976-0eed-43e0-a4b7-b1daa116f739">
    <bqs:Pubmed_id>14695245</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#e82553a3-4ae0-4bc3-9440-570cb495254c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#aa995716-87f3-494f-9107-e1d30bac20dd">
    <dc:subject rdf:resource="rdf:#3caaf065-7097-42ff-830e-339313914aee"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5db0ef9f-eae3-46dc-b2cd-d0fb8d6e8e2e">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#32cc39dc-6c80-46d5-9e20-c61339e71610"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4304401d-b838-4321-b102-3be46d1830d9">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#5733b7ec-aaba-4f47-91cc-4f7e5673fee8"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#924e87c4-1945-4eb5-b66d-46adf277c663">
    <rdf:type rdf:resource="http://www.w3.org/2001/vcard-rdf/3.0#FN"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5345b324-baf1-4f75-aec0-618862ef86aa">
    <dcterms:W3CDTF>2004-01</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#66a19feb-07c5-4914-b15a-72b735dbdd6f">
    <dcterms:W3CDTF>2004-02-26</dcterms:W3CDTF>
  </rdf:Description>
</rdf:RDF>
</model>
