// This CellML file was generated on 28/07/2009 at 2:45:42 at p.m. using:
//
// COR (0.9.31.1207)
// Copyright 2002-2009 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// simulation: endingValue 36000; pointDensity 100000; maximumStepSize 1
// reference: Pubmed_id 17408507; title An in silico model of the ubiquitin-proteasome system that incorporates normal homeostasis and age-related decline; volume 1; Given Carole; Family Proctor; Other J; Given Maria; Family Tsiringotis; Given Douglas; Family Gray; Other A; title BMC Systems Biology; W3CDTF 2007-03-21 00:00; first_page 17
// reference: subject_type keyword; _1 signal transduction; _2 ageing; _3 homeostasis
def model proctor_tsirigotis_gray_2007 as
  // An in-silico model of the ubiquitin-proteasome system thatincorporates normal homeostasis and age-related decline
  //
  // Jeelean Lim
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML version of the model has been checked in COR and OpenCell and the model runs to reproduce the results as shown in figure 3 of the published paper (ie. k69=0). The units have been checked and are consistent. This CellML description is deterministic, unlike the stochastic model created and preferred by the authors. Time courses produced are therefore similar to, but not exactly the same as the figures in the paper; the graphs produced by this CellML description have smooth curves since random fluctuations of the intracellular preocesses are not taken into account.
  //
  // Model Structure
  //
  // ABSTRACT: The ubiquitin-proteasome system is responsible for homeostatic degradation of intact protein substrates as well as the elimination of damaged or misfolded proteins that might otherwise aggregate. During ageing there is a decline in proteasome activity and an increase in aggregated proteins. Many neurodegenerative diseases are characterised by the presence of distinctive ubiquitin-positive inclusion bodies in affected regions of the brain. These inclusions consist of insoluble, unfolded, ubiquitinated polypeptides that fail to be targeted and degraded by the proteasome. We are using a systems biology approach to try and determine the primary event in the decline in proteolytic capacity with age and whether there is in fact a vicious cycle of inhibition, with accumulating aggregates further inhibiting proteolysis, prompting accumulation of aggregates and so on.The model can be used to predict the effects of different experimental procedures such as inhibition of the proteasome or shutting down the enzyme cascade responsible for ubiquitin conjugation. The model output shows good agreement with experimental data under a number of different conditions. However, our model predicts that monomeric ubiquitin pools are always depleted under conditions of proteasome inhibition, whereas experimental data show that monomeric pools were depleted in IMR-90 cells but not in ts20 cells, suggesting that cell lines vary in their ability to replenish ubiquitin pools and there is the need to incorporate ubiquitin turnover into the model. Sensitivity analysis of the model revealed which parameters have an important effect on protein turnover and aggregation kinetics.
  //
  // The original paper reference is cited below:
  //
  // An in silico model of the ubiquitin-proteasome system that incorporates normal homeostasis and age-related decline, Carole J. Proctor, Maria Tsirigotis and Douglas A. Gray, 2007,BMC Systems Biology, 1:17. PubMed ID: 17408507 (http://www.pubmedcentral.nih.gov/articlerender.fcgi?artid=1847462)
  //
  // Figure 1
  //
  // Network diagram of the ubiquitin-proteosome model: Reactants leading to the first ubiquitination step.
  //
  // Figure 2
  //
  // Network diagram of the ubiquitin-proteosome model: reactions of chain lengthening and shortening (only shown for chains up to length four).
  //
  // Figure 3
  //
  // Network diagram of the ubiquitin-proteosome model: binding of substrate with polyubiquitin chains (of length four or more) to proteasome and chain shortening of bound substrates by DUBs which leads to release from proteasome when the chain length is less than four.
  //
  // Figure 4
  //
  // Network diagram of the ubiquitin-proteosome model: degradation of substrates by proteasome in ATP-dependent manner releasing ubiquitin for recycling.
  //
  // Figure 5
  //
  // Network diagram of the ubiquitin-proteosome model: formation of aggregated proteins, sequestering of aggregates and proteasome inhibition by aggregates.
  def unit molecules as base unit;
  def unit first_order_rate_constant as
    unit second {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit second {expo: -1};
    unit molecules {expo: -1};
  enddef;
  def unit flux as
    unit molecules;
    unit second {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp NatP as
    var NatP: molecules {init: 500, pub: out};
    var v1: flux {pub: in};
    var v2: flux {pub: in};
    var v3: flux {pub: in};
    var time: second {pub: in};
    ode(NatP, time) = v1+v3-v2;
  enddef;

  def comp MisP as
    var MisP: molecules {init: 0, pub: out};
    var v2: flux {pub: in};
    var v5: flux {pub: in};
    var v23: flux {pub: in};
    var v3: flux {pub: in};
    var v4: flux {pub: in};
    var v39: flux {pub: in};
    var v40: flux {pub: in};
    var v49: flux {pub: in};
    var v50: flux {pub: in};
    var v51: flux {pub: in};
    var v52: flux {pub: in};
    var v53: flux {pub: in};
    var v54: flux {pub: in};
    var v55: flux {pub: in};
    var v56: flux {pub: in};
    var time: second {pub: in};
    ode(MisP, time) = v2+v5+v23-(v3+v4+2{dimensionless}*v39+v40+v49+v50+v51+v52+v53+v54+v55+v56);
  enddef;

  def comp Ub as
    var Ub: molecules {init: 500, pub: out};
    var v16: flux {pub: in};
    var v17: flux {pub: in};
    var v18: flux {pub: in};
    var v19: flux {pub: in};
    var v20: flux {pub: in};
    var v21: flux {pub: in};
    var v22: flux {pub: in};
    var v23: flux {pub: in};
    var v29: flux {pub: in};
    var v30: flux {pub: in};
    var v31: flux {pub: in};
    var v32: flux {pub: in};
    var v33: flux {pub: in};
    var v34: flux {pub: in};
    var v35: flux {pub: in};
    var v36: flux {pub: in};
    var v37: flux {pub: in};
    var v38: flux {pub: in};
    var v6: flux {pub: in};
    var time: second {pub: in};
    ode(Ub, time) = v16+v17+v18+v19+v20+v21+v22+v23+v29+v30+v31+v32+v33+4{dimensionless}*v34+5{dimensionless}*v35+6{dimensionless}*v36+7{dimensionless}*v37+8{dimensionless}*v38-v6;
  enddef;

  def comp E1 as
    var E1: molecules {init: 100, pub: out};
    var v7: flux {pub: in};
    var v6: flux {pub: in};
    var time: second {pub: in};
    ode(E1, time) = v7-v6;
  enddef;

  def comp E2 as
    var E2: molecules {init: 100, pub: out};
    var v8: flux {pub: in};
    var v9: flux {pub: in};
    var v10: flux {pub: in};
    var v11: flux {pub: in};
    var v12: flux {pub: in};
    var v13: flux {pub: in};
    var v14: flux {pub: in};
    var v15: flux {pub: in};
    var v7: flux {pub: in};
    var time: second {pub: in};
    ode(E2, time) = v8+v9+v10+v11+v12+v13+v14+v15-v7;
  enddef;

  def comp E3 as
    var E3: molecules {init: 100, pub: out};
    var v5: flux {pub: in};
    var v8: flux {pub: in};
    var v4: flux {pub: in};
    var time: second {pub: in};
    ode(E3, time) = v5+v8-v4;
  enddef;

  def comp DUB as
    var DUB: molecules {init: 200, pub: out};
    var v16: flux {pub: in};
    var v17: flux {pub: in};
    var v18: flux {pub: in};
    var v19: flux {pub: in};
    var v20: flux {pub: in};
    var v21: flux {pub: in};
    var v22: flux {pub: in};
    var v23: flux {pub: in};
    var v29: flux {pub: in};
    var v30: flux {pub: in};
    var v31: flux {pub: in};
    var v32: flux {pub: in};
    var v33: flux {pub: in};
    var time: second {pub: in};
    ode(DUB, time) = v16+v17+v18+v19+v20+v21+v22+v23+v29+v30+v31+v32+v33-(v16+v17+v18+v19+v20+v21+v22+v23+v29+v30+v31+v32+v33);
  enddef;

  def comp Proteasome as
    var Proteasome: molecules {init: 100, pub: out};
    var v29: flux {pub: in};
    var v34: flux {pub: in};
    var v35: flux {pub: in};
    var v36: flux {pub: in};
    var v37: flux {pub: in};
    var v38: flux {pub: in};
    var v24: flux {pub: in};
    var v25: flux {pub: in};
    var v26: flux {pub: in};
    var v27: flux {pub: in};
    var v28: flux {pub: in};
    var v94: flux {pub: in};
    var time: second {pub: in};
    ode(Proteasome, time) = v29+v34+v35+v36+v37+v38-(v24+v25+v26+v27+v28+v94);
  enddef;

  def comp ROS as
    var ROS: molecules {init: 10, pub: out};
    var v2: flux {pub: in};
    var time: second {pub: in};
    ode(ROS, time) = v2-v2;
  enddef;

  def comp E1_Ub as
    var E1_Ub: molecules {init: 0, pub: out};
    var v6: flux {pub: in};
    var v7: flux {pub: in};
    var time: second {pub: in};
    ode(E1_Ub, time) = v6-v7;
  enddef;

  def comp E2_Ub as
    var E2_Ub: molecules {init: 0, pub: out};
    var v7: flux {pub: in};
    var v8: flux {pub: in};
    var v9: flux {pub: in};
    var v10: flux {pub: in};
    var v11: flux {pub: in};
    var v12: flux {pub: in};
    var v13: flux {pub: in};
    var v14: flux {pub: in};
    var v15: flux {pub: in};
    var time: second {pub: in};
    ode(E2_Ub, time) = v7-v8-v9-v10-v11-v12-v13-v14-v15;
  enddef;

  def comp E3_MisP as
    var E3_MisP: molecules {init: 0, pub: out};
    var v4: flux {pub: in};
    var v5: flux {pub: in};
    var v8: flux {pub: in};
    var time: second {pub: in};
    ode(E3_MisP, time) = v4-v5-v8;
  enddef;

  def comp MisP_Ub as
    var MisP_Ub: molecules {init: 0, pub: out};
    var v8: flux {pub: in};
    var v22: flux {pub: in};
    var v9: flux {pub: in};
    var v23: flux {pub: in};
    var v41: flux {pub: in};
    var v49: flux {pub: in};
    var v57: flux {pub: in};
    var v65: flux {pub: in};
    var v66: flux {pub: in};
    var v67: flux {pub: in};
    var v68: flux {pub: in};
    var v69: flux {pub: in};
    var v70: flux {pub: in};
    var v71: flux {pub: in};
    var time: second {pub: in};
    ode(MisP_Ub, time) = v8+v22-(v9+v23+2{dimensionless}*v41+v49+v57+v65+v66+v67+v68+v69+v70+v71);
  enddef;

  def comp MisP_Ub2 as
    var MisP_Ub2: molecules {init: 0, pub: out};
    var v9: flux {pub: in};
    var v21: flux {pub: in};
    var v10: flux {pub: in};
    var v22: flux {pub: in};
    var v42: flux {pub: in};
    var v50: flux {pub: in};
    var v58: flux {pub: in};
    var v65: flux {pub: in};
    var v72: flux {pub: in};
    var v73: flux {pub: in};
    var v74: flux {pub: in};
    var v75: flux {pub: in};
    var v76: flux {pub: in};
    var v77: flux {pub: in};
    var time: second {pub: in};
    ode(MisP_Ub2, time) = v9+v21-(v10+v22+2{dimensionless}*v42+v50+v58+v65+v72+v73+v74+v75+v76+v77);
  enddef;

  def comp MisP_Ub3 as
    var MisP_Ub3: molecules {init: 0, pub: out};
    var v10: flux {pub: in};
    var v20: flux {pub: in};
    var v29: flux {pub: in};
    var v11: flux {pub: in};
    var v21: flux {pub: in};
    var v43: flux {pub: in};
    var v51: flux {pub: in};
    var v59: flux {pub: in};
    var v66: flux {pub: in};
    var v72: flux {pub: in};
    var v78: flux {pub: in};
    var v79: flux {pub: in};
    var v80: flux {pub: in};
    var v81: flux {pub: in};
    var v82: flux {pub: in};
    var time: second {pub: in};
    ode(MisP_Ub3, time) = v10+v20+v29-(v11+v21+2{dimensionless}*v43+v51+v59+v66+v72+v78+v79+v80+v81+v82);
  enddef;

  def comp MisP_Ub4 as
    var MisP_Ub4: molecules {init: 0, pub: out};
    var v11: flux {pub: in};
    var v19: flux {pub: in};
    var v12: flux {pub: in};
    var v20: flux {pub: in};
    var v24: flux {pub: in};
    var v44: flux {pub: in};
    var v52: flux {pub: in};
    var v60: flux {pub: in};
    var v67: flux {pub: in};
    var v73: flux {pub: in};
    var v78: flux {pub: in};
    var v83: flux {pub: in};
    var v84: flux {pub: in};
    var v85: flux {pub: in};
    var v86: flux {pub: in};
    var time: second {pub: in};
    ode(MisP_Ub4, time) = v11+v19-(v12+v20+v24+2{dimensionless}*v44+v52+v60+v67+v73+v78+v83+v84+v85+v86);
  enddef;

  def comp MisP_Ub5 as
    var MisP_Ub5: molecules {init: 0, pub: out};
    var v12: flux {pub: in};
    var v18: flux {pub: in};
    var v13: flux {pub: in};
    var v19: flux {pub: in};
    var v25: flux {pub: in};
    var v45: flux {pub: in};
    var v53: flux {pub: in};
    var v61: flux {pub: in};
    var v68: flux {pub: in};
    var v74: flux {pub: in};
    var v79: flux {pub: in};
    var v83: flux {pub: in};
    var v87: flux {pub: in};
    var v88: flux {pub: in};
    var v89: flux {pub: in};
    var time: second {pub: in};
    ode(MisP_Ub5, time) = v12+v18-(v13+v19+v25+2{dimensionless}*v45+v53+v61+v68+v74+v79+v83+v87+v88+v89);
  enddef;

  def comp MisP_Ub6 as
    var MisP_Ub6: molecules {init: 0, pub: out};
    var v13: flux {pub: in};
    var v17: flux {pub: in};
    var v14: flux {pub: in};
    var v18: flux {pub: in};
    var v26: flux {pub: in};
    var v46: flux {pub: in};
    var v54: flux {pub: in};
    var v62: flux {pub: in};
    var v69: flux {pub: in};
    var v75: flux {pub: in};
    var v80: flux {pub: in};
    var v84: flux {pub: in};
    var v87: flux {pub: in};
    var v90: flux {pub: in};
    var v91: flux {pub: in};
    var time: second {pub: in};
    ode(MisP_Ub6, time) = v13+v17-(v14+v18+v26+2{dimensionless}*v46+v54+v62+v69+v75+v80+v84+v87+v90+v91);
  enddef;

  def comp MisP_Ub7 as
    var MisP_Ub7: molecules {init: 0, pub: out};
    var v14: flux {pub: in};
    var v16: flux {pub: in};
    var v15: flux {pub: in};
    var v17: flux {pub: in};
    var v27: flux {pub: in};
    var v47: flux {pub: in};
    var v55: flux {pub: in};
    var v63: flux {pub: in};
    var v70: flux {pub: in};
    var v76: flux {pub: in};
    var v81: flux {pub: in};
    var v85: flux {pub: in};
    var v88: flux {pub: in};
    var v90: flux {pub: in};
    var v92: flux {pub: in};
    var time: second {pub: in};
    ode(MisP_Ub7, time) = v14+v16-(v15+v17+v27+2{dimensionless}*v47+v55+v63+v70+v76+v81+v85+v88+v90+v92);
  enddef;

  def comp MisP_Ub8 as
    var MisP_Ub8: molecules {init: 0, pub: out};
    var v15: flux {pub: in};
    var v16: flux {pub: in};
    var v28: flux {pub: in};
    var v48: flux {pub: in};
    var v56: flux {pub: in};
    var v64: flux {pub: in};
    var v71: flux {pub: in};
    var v77: flux {pub: in};
    var v82: flux {pub: in};
    var v86: flux {pub: in};
    var v89: flux {pub: in};
    var v91: flux {pub: in};
    var v92: flux {pub: in};
    var time: second {pub: in};
    ode(MisP_Ub8, time) = v15-(v16+v28+2{dimensionless}*v48+v56+v64+v71+v77+v82+v86+v89+v91+v92);
  enddef;

  def comp MisP_Ub4_Proteasome as
    var MisP_Ub4_Proteasome: molecules {init: 0, pub: out};
    var v24: flux {pub: in};
    var v30: flux {pub: in};
    var v29: flux {pub: in};
    var v34: flux {pub: in};
    var time: second {pub: in};
    ode(MisP_Ub4_Proteasome, time) = v24+v30-(v29+v34);
  enddef;

  def comp MisP_Ub5_Proteasome as
    var MisP_Ub5_Proteasome: molecules {init: 0, pub: out};
    var v25: flux {pub: in};
    var v31: flux {pub: in};
    var v30: flux {pub: in};
    var v35: flux {pub: in};
    var time: second {pub: in};
    ode(MisP_Ub5_Proteasome, time) = v25+v31-(v30+v35);
  enddef;

  def comp MisP_Ub6_Proteasome as
    var MisP_Ub6_Proteasome: molecules {init: 0, pub: out};
    var v26: flux {pub: in};
    var v32: flux {pub: in};
    var v31: flux {pub: in};
    var v36: flux {pub: in};
    var time: second {pub: in};
    ode(MisP_Ub6_Proteasome, time) = v26+v32-(v31+v36);
  enddef;

  def comp MisP_Ub7_Proteasome as
    var MisP_Ub7_Proteasome: molecules {init: 0, pub: out};
    var v27: flux {pub: in};
    var v33: flux {pub: in};
    var v32: flux {pub: in};
    var v37: flux {pub: in};
    var time: second {pub: in};
    ode(MisP_Ub7_Proteasome, time) = v27+v33-(v32+v37);
  enddef;

  def comp MisP_Ub8_Proteasome as
    var MisP_Ub8_Proteasome: molecules {init: 0, pub: out};
    var v28: flux {pub: in};
    var v33: flux {pub: in};
    var v38: flux {pub: in};
    var time: second {pub: in};
    ode(MisP_Ub8_Proteasome, time) = v28-(v33+v38);
  enddef;

  def comp ATP as
    var ATP: molecules {init: 10000, pub: out};
    var time: second {pub: in};
    ode(ATP, time) = 0{flux};
  enddef;

  def comp ADP as
    var ADP: molecules {init: 1000, pub: out};
    var time: second {pub: in};
    ode(ADP, time) = 0{flux};
  enddef;

  def comp AMP as
    var AMP: molecules {init: 1000, pub: out};
    var time: second {pub: in};
    ode(AMP, time) = 0{flux};
  enddef;

  def comp degUb4 as
    var degUb4: molecules {init: 0, pub: out};
    var v34: flux {pub: in};
    var time: second {pub: in};
    ode(degUb4, time) = v34;
  enddef;

  def comp degUb5 as
    var degUb5: molecules {init: 0, pub: out};
    var v35: flux {pub: in};
    var time: second {pub: in};
    ode(degUb5, time) = v35;
  enddef;

  def comp degUb6 as
    var degUb6: molecules {init: 0, pub: out};
    var v36: flux {pub: in};
    var time: second {pub: in};
    ode(degUb6, time) = v36;
  enddef;

  def comp degUb7 as
    var degUb7: molecules {init: 0, pub: out};
    var v37: flux {pub: in};
    var time: second {pub: in};
    ode(degUb7, time) = v37;
  enddef;

  def comp degUb8 as
    var degUb8: molecules {init: 0, pub: out};
    var v38: flux {pub: in};
    var time: second {pub: in};
    ode(degUb8, time) = v38;
  enddef;

  def comp MisP_total as
    var MisP_total: molecules {init: 0, pub: out};
    var v2: flux {pub: in};
    var time: second {pub: in};
    ode(MisP_total, time) = v2;
  enddef;

  def comp NatP_refolded as
    var NatP_refolded: molecules {init: 0, pub: out};
    var v3: flux {pub: in};
    var time: second {pub: in};
    ode(NatP_refolded, time) = v3;
  enddef;

  def comp AggP as
    var AggP: molecules {init: 0, pub: out};
    var v39: flux {pub: in};
    var v40: flux {pub: in};
    var v41: flux {pub: in};
    var v42: flux {pub: in};
    var v43: flux {pub: in};
    var v44: flux {pub: in};
    var v45: flux {pub: in};
    var v46: flux {pub: in};
    var v47: flux {pub: in};
    var v48: flux {pub: in};
    var v49: flux {pub: in};
    var v50: flux {pub: in};
    var v51: flux {pub: in};
    var v52: flux {pub: in};
    var v53: flux {pub: in};
    var v54: flux {pub: in};
    var v55: flux {pub: in};
    var v56: flux {pub: in};
    var v57: flux {pub: in};
    var v58: flux {pub: in};
    var v59: flux {pub: in};
    var v60: flux {pub: in};
    var v61: flux {pub: in};
    var v62: flux {pub: in};
    var v63: flux {pub: in};
    var v64: flux {pub: in};
    var v65: flux {pub: in};
    var v66: flux {pub: in};
    var v67: flux {pub: in};
    var v68: flux {pub: in};
    var v69: flux {pub: in};
    var v70: flux {pub: in};
    var v71: flux {pub: in};
    var v72: flux {pub: in};
    var v73: flux {pub: in};
    var v74: flux {pub: in};
    var v75: flux {pub: in};
    var v76: flux {pub: in};
    var v77: flux {pub: in};
    var v78: flux {pub: in};
    var v79: flux {pub: in};
    var v80: flux {pub: in};
    var v81: flux {pub: in};
    var v82: flux {pub: in};
    var v83: flux {pub: in};
    var v84: flux {pub: in};
    var v85: flux {pub: in};
    var v86: flux {pub: in};
    var v87: flux {pub: in};
    var v88: flux {pub: in};
    var v89: flux {pub: in};
    var v90: flux {pub: in};
    var v91: flux {pub: in};
    var v92: flux {pub: in};
    var v93: flux {pub: in};
    var v94: flux {pub: in};
    var time: second {pub: in};
    ode(AggP, time) = v39+2{dimensionless}*v40+v41+v42+v43+v44+v45+v46+v47+v48+v49+v50+v51+v52+v53+v54+v55+v56+2{dimensionless}*v57+2{dimensionless}*v58+2{dimensionless}*v59+2{dimensionless}*v60+2{dimensionless}*v61+2{dimensionless}*v62+2{dimensionless}*v63+2{dimensionless}*v64+v65+v66+v67+v68+v69+v70+v71+v72+v73+v74+v75+v76+v77+v78+v79+v80+v81+v82+v83+v84+v85+v86+v87+v88+v89+v90+v91+v92-(v40+v57+v58+v59+v60+v61+v62+v63+v64+v93+v94);
  enddef;

  def comp SeqAggP as
    var SeqAggP: molecules {init: 0, pub: out};
    var v93: flux {pub: in};
    var time: second {pub: in};
    ode(SeqAggP, time) = v93;
  enddef;

  def comp AggP_Proteasome as
    var AggP_Proteasome: molecules {init: 0, pub: out};
    var v94: flux {pub: in};
    var time: second {pub: in};
    ode(AggP_Proteasome, time) = v94;
  enddef;

  def comp v1 as
    var v1: flux {pub: out};
    var k1: flux {pub: in};
    v1 = k1;
  enddef;

  def comp v2 as
    var v2: flux {pub: out};
    var k2: second_order_rate_constant {pub: in};
    var NatP: molecules {pub: in};
    var ROS: molecules {pub: in};
    v2 = k2*NatP*ROS;
  enddef;

  def comp v3 as
    var v3: flux {pub: out};
    var k3: first_order_rate_constant {pub: in};
    var MisP: molecules {pub: in};
    v3 = k3*MisP;
  enddef;

  def comp v4 as
    var v4: flux {pub: out};
    var k61: second_order_rate_constant {pub: in};
    var E3: molecules {pub: in};
    var MisP: molecules {pub: in};
    v4 = k61*E3*MisP;
  enddef;

  def comp v5 as
    var v5: flux {pub: out};
    var k61r: first_order_rate_constant {pub: in};
    var E3_MisP: molecules {pub: in};
    v5 = k61r*E3_MisP;
  enddef;

  def comp v6 as
    var v6: flux {pub: out};
    var k62: second_order_rate_constant {pub: in};
    var E1: molecules {pub: in};
    var Ub: molecules {pub: in};
    var ATP: molecules {pub: in};
    v6 = k62*E1*Ub*ATP/(5000{molecules}+ATP);
  enddef;

  def comp v7 as
    var v7: flux {pub: out};
    var k63: second_order_rate_constant {pub: in};
    var E2: molecules {pub: in};
    var E1_Ub: molecules {pub: in};
    v7 = k63*E2*E1_Ub;
  enddef;

  def comp v8 as
    var v8: flux {pub: out};
    var k64: second_order_rate_constant {pub: in};
    var E2_Ub: molecules {pub: in};
    var E3_MisP: molecules {pub: in};
    v8 = k64*E2_Ub*E3_MisP;
  enddef;

  def comp v9 as
    var v9: flux {pub: out};
    var k65: second_order_rate_constant {pub: in};
    var E2_Ub: molecules {pub: in};
    var MisP_Ub: molecules {pub: in};
    v9 = k65*E2_Ub*MisP_Ub;
  enddef;

  def comp v10 as
    var v10: flux {pub: out};
    var k65: second_order_rate_constant {pub: in};
    var E2_Ub: molecules {pub: in};
    var MisP_Ub2: molecules {pub: in};
    v10 = k65*E2_Ub*MisP_Ub2;
  enddef;

  def comp v11 as
    var v11: flux {pub: out};
    var k65: second_order_rate_constant {pub: in};
    var E2_Ub: molecules {pub: in};
    var MisP_Ub3: molecules {pub: in};
    v11 = k65*E2_Ub*MisP_Ub3;
  enddef;

  def comp v12 as
    var v12: flux {pub: out};
    var k65: second_order_rate_constant {pub: in};
    var E2_Ub: molecules {pub: in};
    var MisP_Ub4: molecules {pub: in};
    v12 = k65*E2_Ub*MisP_Ub4;
  enddef;

  def comp v13 as
    var v13: flux {pub: out};
    var k65: second_order_rate_constant {pub: in};
    var E2_Ub: molecules {pub: in};
    var MisP_Ub5: molecules {pub: in};
    v13 = k65*E2_Ub*MisP_Ub5;
  enddef;

  def comp v14 as
    var v14: flux {pub: out};
    var k65: second_order_rate_constant {pub: in};
    var E2_Ub: molecules {pub: in};
    var MisP_Ub6: molecules {pub: in};
    v14 = k65*E2_Ub*MisP_Ub6;
  enddef;

  def comp v15 as
    var v15: flux {pub: out};
    var k65: second_order_rate_constant {pub: in};
    var E2_Ub: molecules {pub: in};
    var MisP_Ub7: molecules {pub: in};
    v15 = k65*E2_Ub*MisP_Ub7;
  enddef;

  def comp v16 as
    var v16: flux {pub: out};
    var k66: second_order_rate_constant {pub: in};
    var DUB: molecules {pub: in};
    var MisP_Ub8: molecules {pub: in};
    v16 = k66*DUB*MisP_Ub8;
  enddef;

  def comp v17 as
    var v17: flux {pub: out};
    var k66: second_order_rate_constant {pub: in};
    var DUB: molecules {pub: in};
    var MisP_Ub7: molecules {pub: in};
    v17 = k66*DUB*MisP_Ub7;
  enddef;

  def comp v18 as
    var v18: flux {pub: out};
    var k66: second_order_rate_constant {pub: in};
    var DUB: molecules {pub: in};
    var MisP_Ub6: molecules {pub: in};
    v18 = k66*DUB*MisP_Ub6;
  enddef;

  def comp v19 as
    var v19: flux {pub: out};
    var k66: second_order_rate_constant {pub: in};
    var DUB: molecules {pub: in};
    var MisP_Ub5: molecules {pub: in};
    v19 = k66*DUB*MisP_Ub5;
  enddef;

  def comp v20 as
    var v20: flux {pub: out};
    var k66: second_order_rate_constant {pub: in};
    var DUB: molecules {pub: in};
    var MisP_Ub4: molecules {pub: in};
    v20 = k66*DUB*MisP_Ub4;
  enddef;

  def comp v21 as
    var v21: flux {pub: out};
    var k66: second_order_rate_constant {pub: in};
    var DUB: molecules {pub: in};
    var MisP_Ub3: molecules {pub: in};
    v21 = k66*DUB*MisP_Ub3;
  enddef;

  def comp v22 as
    var v22: flux {pub: out};
    var k66: second_order_rate_constant {pub: in};
    var DUB: molecules {pub: in};
    var MisP_Ub2: molecules {pub: in};
    v22 = k66*DUB*MisP_Ub2;
  enddef;

  def comp v23 as
    var v23: flux {pub: out};
    var k66: second_order_rate_constant {pub: in};
    var DUB: molecules {pub: in};
    var MisP_Ub: molecules {pub: in};
    v23 = k66*DUB*MisP_Ub;
  enddef;

  def comp v24 as
    var v24: flux {pub: out};
    var k67: second_order_rate_constant {pub: in};
    var MisP_Ub4: molecules {pub: in};
    var Proteasome: molecules {pub: in};
    v24 = k67*MisP_Ub4*Proteasome;
  enddef;

  def comp v25 as
    var v25: flux {pub: out};
    var k67: second_order_rate_constant {pub: in};
    var MisP_Ub5: molecules {pub: in};
    var Proteasome: molecules {pub: in};
    v25 = k67*MisP_Ub5*Proteasome;
  enddef;

  def comp v26 as
    var v26: flux {pub: out};
    var k67: second_order_rate_constant {pub: in};
    var MisP_Ub6: molecules {pub: in};
    var Proteasome: molecules {pub: in};
    v26 = k67*MisP_Ub6*Proteasome;
  enddef;

  def comp v27 as
    var v27: flux {pub: out};
    var k67: second_order_rate_constant {pub: in};
    var MisP_Ub7: molecules {pub: in};
    var Proteasome: molecules {pub: in};
    v27 = k67*MisP_Ub7*Proteasome;
  enddef;

  def comp v28 as
    var v28: flux {pub: out};
    var k67: second_order_rate_constant {pub: in};
    var MisP_Ub8: molecules {pub: in};
    var Proteasome: molecules {pub: in};
    v28 = k67*MisP_Ub8*Proteasome;
  enddef;

  def comp v29 as
    var v29: flux {pub: out};
    var k68: second_order_rate_constant {pub: in};
    var DUB: molecules {pub: in};
    var MisP_Ub4_Proteasome: molecules {pub: in};
    v29 = k68*DUB*MisP_Ub4_Proteasome;
  enddef;

  def comp v30 as
    var v30: flux {pub: out};
    var k68: second_order_rate_constant {pub: in};
    var DUB: molecules {pub: in};
    var MisP_Ub5_Proteasome: molecules {pub: in};
    v30 = k68*DUB*MisP_Ub5_Proteasome;
  enddef;

  def comp v31 as
    var v31: flux {pub: out};
    var k68: second_order_rate_constant {pub: in};
    var DUB: molecules {pub: in};
    var MisP_Ub6_Proteasome: molecules {pub: in};
    v31 = k68*DUB*MisP_Ub6_Proteasome;
  enddef;

  def comp v32 as
    var v32: flux {pub: out};
    var k68: second_order_rate_constant {pub: in};
    var DUB: molecules {pub: in};
    var MisP_Ub7_Proteasome: molecules {pub: in};
    v32 = k68*DUB*MisP_Ub7_Proteasome;
  enddef;

  def comp v33 as
    var v33: flux {pub: out};
    var k68: second_order_rate_constant {pub: in};
    var DUB: molecules {pub: in};
    var MisP_Ub8_Proteasome: molecules {pub: in};
    v33 = k68*DUB*MisP_Ub8_Proteasome;
  enddef;

  def comp v34 as
    var v34: flux {pub: out};
    var k69: first_order_rate_constant {pub: in};
    var MisP_Ub4_Proteasome: molecules {pub: in};
    var ATP: molecules {pub: in};
    v34 = k69*MisP_Ub4_Proteasome*ATP/(5000{molecules}+ATP);
  enddef;

  def comp v35 as
    var v35: flux {pub: out};
    var k69: first_order_rate_constant {pub: in};
    var MisP_Ub5_Proteasome: molecules {pub: in};
    var ATP: molecules {pub: in};
    v35 = k69*MisP_Ub5_Proteasome*ATP/(5000{molecules}+ATP);
  enddef;

  def comp v36 as
    var v36: flux {pub: out};
    var k69: first_order_rate_constant {pub: in};
    var MisP_Ub6_Proteasome: molecules {pub: in};
    var ATP: molecules {pub: in};
    v36 = k69*MisP_Ub6_Proteasome*ATP/(5000{molecules}+ATP);
  enddef;

  def comp v37 as
    var v37: flux {pub: out};
    var k69: first_order_rate_constant {pub: in};
    var MisP_Ub7_Proteasome: molecules {pub: in};
    var ATP: molecules {pub: in};
    v37 = k69*MisP_Ub7_Proteasome*ATP/(5000{molecules}+ATP);
  enddef;

  def comp v38 as
    var v38: flux {pub: out};
    var k69: first_order_rate_constant {pub: in};
    var MisP_Ub8_Proteasome: molecules {pub: in};
    var ATP: molecules {pub: in};
    v38 = k69*MisP_Ub8_Proteasome*ATP/(5000{molecules}+ATP);
  enddef;

  def comp v39 as
    var v39: flux {pub: out};
    var k71: second_order_rate_constant {pub: in};
    var MisP: molecules {pub: in};
    v39 = k71*MisP*(MisP-1{molecules})/2{dimensionless};
  enddef;

  def comp v40 as
    var v40: flux {pub: out};
    var k71: second_order_rate_constant {pub: in};
    var MisP: molecules {pub: in};
    var AggP: molecules {pub: in};
    v40 = k71*MisP*AggP;
  enddef;

  def comp v41 as
    var v41: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub: molecules {pub: in};
    v41 = k72*MisP_Ub*(MisP_Ub-1{molecules})/2{dimensionless};
  enddef;

  def comp v42 as
    var v42: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub2: molecules {pub: in};
    v42 = k72*MisP_Ub2*(MisP_Ub2-1{molecules})/2{dimensionless};
  enddef;

  def comp v43 as
    var v43: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub3: molecules {pub: in};
    v43 = k72*MisP_Ub3*(MisP_Ub3-1{molecules})/2{dimensionless};
  enddef;

  def comp v44 as
    var v44: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub4: molecules {pub: in};
    v44 = k72*MisP_Ub4*(MisP_Ub4-1{molecules})/2{dimensionless};
  enddef;

  def comp v45 as
    var v45: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub5: molecules {pub: in};
    v45 = k72*MisP_Ub5*(MisP_Ub5-1{molecules})/2{dimensionless};
  enddef;

  def comp v46 as
    var v46: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub6: molecules {pub: in};
    v46 = k72*MisP_Ub6*(MisP_Ub6-1{molecules})/2{dimensionless};
  enddef;

  def comp v47 as
    var v47: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub7: molecules {pub: in};
    v47 = k72*MisP_Ub7*(MisP_Ub7-1{molecules})/2{dimensionless};
  enddef;

  def comp v48 as
    var v48: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub8: molecules {pub: in};
    v48 = k72*MisP_Ub8*(MisP_Ub8-1{molecules})/2{dimensionless};
  enddef;

  def comp v49 as
    var v49: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP: molecules {pub: in};
    var MisP_Ub: molecules {pub: in};
    v49 = k72*MisP*MisP_Ub;
  enddef;

  def comp v50 as
    var v50: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP: molecules {pub: in};
    var MisP_Ub2: molecules {pub: in};
    v50 = k72*MisP*MisP_Ub2;
  enddef;

  def comp v51 as
    var v51: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP: molecules {pub: in};
    var MisP_Ub3: molecules {pub: in};
    v51 = k72*MisP*MisP_Ub3;
  enddef;

  def comp v52 as
    var v52: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP: molecules {pub: in};
    var MisP_Ub4: molecules {pub: in};
    v52 = k72*MisP*MisP_Ub4;
  enddef;

  def comp v53 as
    var v53: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP: molecules {pub: in};
    var MisP_Ub5: molecules {pub: in};
    v53 = k72*MisP*MisP_Ub5;
  enddef;

  def comp v54 as
    var v54: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP: molecules {pub: in};
    var MisP_Ub6: molecules {pub: in};
    v54 = k72*MisP*MisP_Ub6;
  enddef;

  def comp v55 as
    var v55: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP: molecules {pub: in};
    var MisP_Ub7: molecules {pub: in};
    v55 = k72*MisP*MisP_Ub7;
  enddef;

  def comp v56 as
    var v56: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP: molecules {pub: in};
    var MisP_Ub8: molecules {pub: in};
    v56 = k72*MisP*MisP_Ub8;
  enddef;

  def comp v57 as
    var v57: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var AggP: molecules {pub: in};
    var MisP_Ub: molecules {pub: in};
    v57 = k72*AggP*MisP_Ub;
  enddef;

  def comp v58 as
    var v58: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var AggP: molecules {pub: in};
    var MisP_Ub2: molecules {pub: in};
    v58 = k72*AggP*MisP_Ub2;
  enddef;

  def comp v59 as
    var v59: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var AggP: molecules {pub: in};
    var MisP_Ub3: molecules {pub: in};
    v59 = k72*AggP*MisP_Ub3;
  enddef;

  def comp v60 as
    var v60: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var AggP: molecules {pub: in};
    var MisP_Ub4: molecules {pub: in};
    v60 = k72*AggP*MisP_Ub4;
  enddef;

  def comp v61 as
    var v61: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var AggP: molecules {pub: in};
    var MisP_Ub5: molecules {pub: in};
    v61 = k72*AggP*MisP_Ub5;
  enddef;

  def comp v62 as
    var v62: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var AggP: molecules {pub: in};
    var MisP_Ub6: molecules {pub: in};
    v62 = k72*AggP*MisP_Ub6;
  enddef;

  def comp v63 as
    var v63: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var AggP: molecules {pub: in};
    var MisP_Ub7: molecules {pub: in};
    v63 = k72*AggP*MisP_Ub7;
  enddef;

  def comp v64 as
    var v64: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var AggP: molecules {pub: in};
    var MisP_Ub8: molecules {pub: in};
    v64 = k72*AggP*MisP_Ub8;
  enddef;

  def comp v65 as
    var v65: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub: molecules {pub: in};
    var MisP_Ub2: molecules {pub: in};
    v65 = k72*MisP_Ub*MisP_Ub2;
  enddef;

  def comp v66 as
    var v66: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub: molecules {pub: in};
    var MisP_Ub3: molecules {pub: in};
    v66 = k72*MisP_Ub*MisP_Ub3;
  enddef;

  def comp v67 as
    var v67: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub: molecules {pub: in};
    var MisP_Ub4: molecules {pub: in};
    v67 = k72*MisP_Ub*MisP_Ub4;
  enddef;

  def comp v68 as
    var v68: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub: molecules {pub: in};
    var MisP_Ub5: molecules {pub: in};
    v68 = k72*MisP_Ub*MisP_Ub5;
  enddef;

  def comp v69 as
    var v69: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub: molecules {pub: in};
    var MisP_Ub6: molecules {pub: in};
    v69 = k72*MisP_Ub*MisP_Ub6;
  enddef;

  def comp v70 as
    var v70: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub: molecules {pub: in};
    var MisP_Ub7: molecules {pub: in};
    v70 = k72*MisP_Ub*MisP_Ub7;
  enddef;

  def comp v71 as
    var v71: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub: molecules {pub: in};
    var MisP_Ub8: molecules {pub: in};
    v71 = k72*MisP_Ub*MisP_Ub8;
  enddef;

  def comp v72 as
    var v72: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub2: molecules {pub: in};
    var MisP_Ub3: molecules {pub: in};
    v72 = k72*MisP_Ub2*MisP_Ub3;
  enddef;

  def comp v73 as
    var v73: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub2: molecules {pub: in};
    var MisP_Ub4: molecules {pub: in};
    v73 = k72*MisP_Ub2*MisP_Ub4;
  enddef;

  def comp v74 as
    var v74: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub2: molecules {pub: in};
    var MisP_Ub5: molecules {pub: in};
    v74 = k72*MisP_Ub2*MisP_Ub5;
  enddef;

  def comp v75 as
    var v75: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub2: molecules {pub: in};
    var MisP_Ub6: molecules {pub: in};
    v75 = k72*MisP_Ub2*MisP_Ub6;
  enddef;

  def comp v76 as
    var v76: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub2: molecules {pub: in};
    var MisP_Ub7: molecules {pub: in};
    v76 = k72*MisP_Ub2*MisP_Ub7;
  enddef;

  def comp v77 as
    var v77: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub2: molecules {pub: in};
    var MisP_Ub8: molecules {pub: in};
    v77 = k72*MisP_Ub2*MisP_Ub8;
  enddef;

  def comp v78 as
    var v78: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub3: molecules {pub: in};
    var MisP_Ub4: molecules {pub: in};
    v78 = k72*MisP_Ub3*MisP_Ub4;
  enddef;

  def comp v79 as
    var v79: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub3: molecules {pub: in};
    var MisP_Ub5: molecules {pub: in};
    v79 = k72*MisP_Ub3*MisP_Ub5;
  enddef;

  def comp v80 as
    var v80: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub3: molecules {pub: in};
    var MisP_Ub6: molecules {pub: in};
    v80 = k72*MisP_Ub3*MisP_Ub6;
  enddef;

  def comp v81 as
    var v81: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub3: molecules {pub: in};
    var MisP_Ub7: molecules {pub: in};
    v81 = k72*MisP_Ub3*MisP_Ub7;
  enddef;

  def comp v82 as
    var v82: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub3: molecules {pub: in};
    var MisP_Ub8: molecules {pub: in};
    v82 = k72*MisP_Ub3*MisP_Ub8;
  enddef;

  def comp v83 as
    var v83: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub4: molecules {pub: in};
    var MisP_Ub5: molecules {pub: in};
    v83 = k72*MisP_Ub4*MisP_Ub5;
  enddef;

  def comp v84 as
    var v84: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub4: molecules {pub: in};
    var MisP_Ub6: molecules {pub: in};
    v84 = k72*MisP_Ub4*MisP_Ub6;
  enddef;

  def comp v85 as
    var v85: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub4: molecules {pub: in};
    var MisP_Ub7: molecules {pub: in};
    v85 = k72*MisP_Ub4*MisP_Ub7;
  enddef;

  def comp v86 as
    var v86: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub4: molecules {pub: in};
    var MisP_Ub8: molecules {pub: in};
    v86 = k72*MisP_Ub4*MisP_Ub8;
  enddef;

  def comp v87 as
    var v87: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub5: molecules {pub: in};
    var MisP_Ub6: molecules {pub: in};
    v87 = k72*MisP_Ub5*MisP_Ub6;
  enddef;

  def comp v88 as
    var v88: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub5: molecules {pub: in};
    var MisP_Ub7: molecules {pub: in};
    v88 = k72*MisP_Ub5*MisP_Ub7;
  enddef;

  def comp v89 as
    var v89: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub5: molecules {pub: in};
    var MisP_Ub8: molecules {pub: in};
    v89 = k72*MisP_Ub5*MisP_Ub8;
  enddef;

  def comp v90 as
    var v90: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub6: molecules {pub: in};
    var MisP_Ub7: molecules {pub: in};
    v90 = k72*MisP_Ub6*MisP_Ub7;
  enddef;

  def comp v91 as
    var v91: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub6: molecules {pub: in};
    var MisP_Ub8: molecules {pub: in};
    v91 = k72*MisP_Ub6*MisP_Ub8;
  enddef;

  def comp v92 as
    var v92: flux {pub: out};
    var k72: second_order_rate_constant {pub: in};
    var MisP_Ub7: molecules {pub: in};
    var MisP_Ub8: molecules {pub: in};
    v92 = k72*MisP_Ub7*MisP_Ub8;
  enddef;

  def comp v93 as
    var v93: flux {pub: out};
    var k73: first_order_rate_constant {pub: in};
    var AggP: molecules {pub: in};
    v93 = k73*AggP;
  enddef;

  def comp v94 as
    var v94: flux {pub: out};
    var k74: second_order_rate_constant {pub: in};
    var AggP: molecules {pub: in};
    var Proteasome: molecules {pub: in};
    v94 = k74*AggP*Proteasome;
  enddef;

  def comp kinetic_parameters as
    var k1: flux {init: 0.01, pub: out};
    var k2: second_order_rate_constant {init: 2e-6, pub: out};
    var k3: first_order_rate_constant {init: 4e-6, pub: out};
    var k61: second_order_rate_constant {init: 1.7e-5, pub: out};
    var k61r: first_order_rate_constant {init: 2e-4, pub: out};
    var k62: second_order_rate_constant {init: 2e-4, pub: out};
    var k63: second_order_rate_constant {init: 1e-3, pub: out};
    var k64: second_order_rate_constant {init: 1e-3, pub: out};
    var k65: second_order_rate_constant {init: 1e-3, pub: out};
    var k66: second_order_rate_constant {init: 1e-5, pub: out};
    var k67: second_order_rate_constant {init: 1e-5, pub: out};
    var k68: second_order_rate_constant {init: 1e-5, pub: out};
    var k69: first_order_rate_constant {init: 0, pub: out};
    var k71: second_order_rate_constant {init: 1e-8, pub: out};
    var k72: second_order_rate_constant {init: 1e-8, pub: out};
    var k73: first_order_rate_constant {init: 1e-3, pub: out};
    var k74: second_order_rate_constant {init: 1e-5, pub: out};
  enddef;
  def map between NatP and environment for
    vars time and time;
  enddef;
  def map between MisP and environment for
    vars time and time;
  enddef;
  def map between Ub and environment for
    vars time and time;
  enddef;
  def map between E1 and environment for
    vars time and time;
  enddef;
  def map between E2 and environment for
    vars time and time;
  enddef;
  def map between E3 and environment for
    vars time and time;
  enddef;
  def map between DUB and environment for
    vars time and time;
  enddef;
  def map between Proteasome and environment for
    vars time and time;
  enddef;
  def map between E1_Ub and environment for
    vars time and time;
  enddef;
  def map between E2_Ub and environment for
    vars time and time;
  enddef;
  def map between E3_MisP and environment for
    vars time and time;
  enddef;
  def map between ROS and environment for
    vars time and time;
  enddef;
  def map between MisP_Ub and environment for
    vars time and time;
  enddef;
  def map between MisP_Ub2 and environment for
    vars time and time;
  enddef;
  def map between MisP_Ub3 and environment for
    vars time and time;
  enddef;
  def map between MisP_Ub4 and environment for
    vars time and time;
  enddef;
  def map between MisP_Ub5 and environment for
    vars time and time;
  enddef;
  def map between MisP_Ub6 and environment for
    vars time and time;
  enddef;
  def map between MisP_Ub7 and environment for
    vars time and time;
  enddef;
  def map between MisP_Ub8 and environment for
    vars time and time;
  enddef;
  def map between MisP_Ub4_Proteasome and environment for
    vars time and time;
  enddef;
  def map between MisP_Ub5_Proteasome and environment for
    vars time and time;
  enddef;
  def map between MisP_Ub6_Proteasome and environment for
    vars time and time;
  enddef;
  def map between MisP_Ub7_Proteasome and environment for
    vars time and time;
  enddef;
  def map between MisP_Ub8_Proteasome and environment for
    vars time and time;
  enddef;
  def map between ATP and environment for
    vars time and time;
  enddef;
  def map between ADP and environment for
    vars time and time;
  enddef;
  def map between AMP and environment for
    vars time and time;
  enddef;
  def map between degUb4 and environment for
    vars time and time;
  enddef;
  def map between degUb5 and environment for
    vars time and time;
  enddef;
  def map between degUb6 and environment for
    vars time and time;
  enddef;
  def map between degUb7 and environment for
    vars time and time;
  enddef;
  def map between degUb8 and environment for
    vars time and time;
  enddef;
  def map between MisP_total and environment for
    vars time and time;
  enddef;
  def map between NatP_refolded and environment for
    vars time and time;
  enddef;
  def map between AggP and environment for
    vars time and time;
  enddef;
  def map between SeqAggP and environment for
    vars time and time;
  enddef;
  def map between AggP_Proteasome and environment for
    vars time and time;
  enddef;
  def map between NatP and v1 for
    vars v1 and v1;
  enddef;
  def map between NatP and v2 for
    vars v2 and v2;
    vars NatP and NatP;
  enddef;
  def map between NatP and v3 for
    vars v3 and v3;
  enddef;
  def map between MisP and v2 for
    vars v2 and v2;
  enddef;
  def map between MisP and v5 for
    vars v5 and v5;
  enddef;
  def map between MisP and v23 for
    vars v23 and v23;
  enddef;
  def map between MisP and v3 for
    vars v3 and v3;
    vars MisP and MisP;
  enddef;
  def map between MisP and v4 for
    vars v4 and v4;
    vars MisP and MisP;
  enddef;
  def map between MisP and v39 for
    vars v39 and v39;
    vars MisP and MisP;
  enddef;
  def map between MisP and v40 for
    vars v40 and v40;
    vars MisP and MisP;
  enddef;
  def map between MisP and v49 for
    vars v49 and v49;
    vars MisP and MisP;
  enddef;
  def map between MisP and v50 for
    vars v50 and v50;
    vars MisP and MisP;
  enddef;
  def map between MisP and v51 for
    vars v51 and v51;
    vars MisP and MisP;
  enddef;
  def map between MisP and v52 for
    vars v52 and v52;
    vars MisP and MisP;
  enddef;
  def map between MisP and v53 for
    vars v53 and v53;
    vars MisP and MisP;
  enddef;
  def map between MisP and v54 for
    vars v54 and v54;
    vars MisP and MisP;
  enddef;
  def map between MisP and v55 for
    vars v55 and v55;
    vars MisP and MisP;
  enddef;
  def map between MisP and v56 for
    vars v56 and v56;
    vars MisP and MisP;
  enddef;
  def map between Ub and v16 for
    vars v16 and v16;
  enddef;
  def map between Ub and v17 for
    vars v17 and v17;
  enddef;
  def map between Ub and v18 for
    vars v18 and v18;
  enddef;
  def map between Ub and v19 for
    vars v19 and v19;
  enddef;
  def map between Ub and v20 for
    vars v20 and v20;
  enddef;
  def map between Ub and v21 for
    vars v21 and v21;
  enddef;
  def map between Ub and v22 for
    vars v22 and v22;
  enddef;
  def map between Ub and v23 for
    vars v23 and v23;
  enddef;
  def map between Ub and v29 for
    vars v29 and v29;
  enddef;
  def map between Ub and v30 for
    vars v30 and v30;
  enddef;
  def map between Ub and v31 for
    vars v31 and v31;
  enddef;
  def map between Ub and v32 for
    vars v32 and v32;
  enddef;
  def map between Ub and v33 for
    vars v33 and v33;
  enddef;
  def map between Ub and v34 for
    vars v34 and v34;
  enddef;
  def map between Ub and v35 for
    vars v35 and v35;
  enddef;
  def map between Ub and v36 for
    vars v36 and v36;
  enddef;
  def map between Ub and v37 for
    vars v37 and v37;
  enddef;
  def map between Ub and v38 for
    vars v38 and v38;
  enddef;
  def map between Ub and v6 for
    vars v6 and v6;
    vars Ub and Ub;
  enddef;
  def map between E1 and v7 for
    vars v7 and v7;
  enddef;
  def map between E1 and v6 for
    vars v6 and v6;
    vars E1 and E1;
  enddef;
  def map between E2 and v8 for
    vars v8 and v8;
  enddef;
  def map between E2 and v9 for
    vars v9 and v9;
  enddef;
  def map between E2 and v10 for
    vars v10 and v10;
  enddef;
  def map between E2 and v11 for
    vars v11 and v11;
  enddef;
  def map between E2 and v12 for
    vars v12 and v12;
  enddef;
  def map between E2 and v13 for
    vars v13 and v13;
  enddef;
  def map between E2 and v14 for
    vars v14 and v14;
  enddef;
  def map between E2 and v15 for
    vars v15 and v15;
  enddef;
  def map between E2 and v7 for
    vars v7 and v7;
    vars E2 and E2;
  enddef;
  def map between E3 and v5 for
    vars v5 and v5;
  enddef;
  def map between E3 and v8 for
    vars v8 and v8;
  enddef;
  def map between E3 and v4 for
    vars v4 and v4;
    vars E3 and E3;
  enddef;
  def map between DUB and v16 for
    vars v16 and v16;
    vars DUB and DUB;
  enddef;
  def map between DUB and v17 for
    vars v17 and v17;
    vars DUB and DUB;
  enddef;
  def map between DUB and v18 for
    vars v18 and v18;
    vars DUB and DUB;
  enddef;
  def map between DUB and v19 for
    vars v19 and v19;
    vars DUB and DUB;
  enddef;
  def map between DUB and v20 for
    vars v20 and v20;
    vars DUB and DUB;
  enddef;
  def map between DUB and v21 for
    vars v21 and v21;
    vars DUB and DUB;
  enddef;
  def map between DUB and v22 for
    vars v22 and v22;
    vars DUB and DUB;
  enddef;
  def map between DUB and v23 for
    vars v23 and v23;
    vars DUB and DUB;
  enddef;
  def map between DUB and v29 for
    vars v29 and v29;
    vars DUB and DUB;
  enddef;
  def map between DUB and v30 for
    vars v30 and v30;
    vars DUB and DUB;
  enddef;
  def map between DUB and v31 for
    vars v31 and v31;
    vars DUB and DUB;
  enddef;
  def map between DUB and v32 for
    vars v32 and v32;
    vars DUB and DUB;
  enddef;
  def map between DUB and v33 for
    vars v33 and v33;
    vars DUB and DUB;
  enddef;
  def map between Proteasome and v29 for
    vars v29 and v29;
  enddef;
  def map between Proteasome and v34 for
    vars v34 and v34;
  enddef;
  def map between Proteasome and v35 for
    vars v35 and v35;
  enddef;
  def map between Proteasome and v36 for
    vars v36 and v36;
  enddef;
  def map between Proteasome and v37 for
    vars v37 and v37;
  enddef;
  def map between Proteasome and v38 for
    vars v38 and v38;
  enddef;
  def map between Proteasome and v24 for
    vars v24 and v24;
    vars Proteasome and Proteasome;
  enddef;
  def map between Proteasome and v25 for
    vars v25 and v25;
    vars Proteasome and Proteasome;
  enddef;
  def map between Proteasome and v26 for
    vars v26 and v26;
    vars Proteasome and Proteasome;
  enddef;
  def map between Proteasome and v27 for
    vars v27 and v27;
    vars Proteasome and Proteasome;
  enddef;
  def map between Proteasome and v28 for
    vars v28 and v28;
    vars Proteasome and Proteasome;
  enddef;
  def map between Proteasome and v94 for
    vars v94 and v94;
    vars Proteasome and Proteasome;
  enddef;
  def map between E1_Ub and v6 for
    vars v6 and v6;
  enddef;
  def map between E1_Ub and v7 for
    vars v7 and v7;
    vars E1_Ub and E1_Ub;
  enddef;
  def map between ROS and v2 for
    vars v2 and v2;
    vars ROS and ROS;
  enddef;
  def map between E2_Ub and v7 for
    vars v7 and v7;
  enddef;
  def map between E2_Ub and v8 for
    vars v8 and v8;
    vars E2_Ub and E2_Ub;
  enddef;
  def map between E2_Ub and v9 for
    vars v9 and v9;
    vars E2_Ub and E2_Ub;
  enddef;
  def map between E2_Ub and v10 for
    vars v10 and v10;
    vars E2_Ub and E2_Ub;
  enddef;
  def map between E2_Ub and v11 for
    vars v11 and v11;
    vars E2_Ub and E2_Ub;
  enddef;
  def map between E2_Ub and v12 for
    vars v12 and v12;
    vars E2_Ub and E2_Ub;
  enddef;
  def map between E2_Ub and v13 for
    vars v13 and v13;
    vars E2_Ub and E2_Ub;
  enddef;
  def map between E2_Ub and v14 for
    vars v14 and v14;
    vars E2_Ub and E2_Ub;
  enddef;
  def map between E2_Ub and v15 for
    vars v15 and v15;
    vars E2_Ub and E2_Ub;
  enddef;
  def map between E3_MisP and v4 for
    vars v4 and v4;
  enddef;
  def map between E3_MisP and v5 for
    vars v5 and v5;
    vars E3_MisP and E3_MisP;
  enddef;
  def map between E3_MisP and v8 for
    vars v8 and v8;
    vars E3_MisP and E3_MisP;
  enddef;
  def map between MisP_Ub and v8 for
    vars v8 and v8;
  enddef;
  def map between MisP_Ub and v22 for
    vars v22 and v22;
  enddef;
  def map between MisP_Ub and v9 for
    vars v9 and v9;
    vars MisP_Ub and MisP_Ub;
  enddef;
  def map between MisP_Ub and v23 for
    vars v23 and v23;
    vars MisP_Ub and MisP_Ub;
  enddef;
  def map between MisP_Ub and v41 for
    vars v41 and v41;
    vars MisP_Ub and MisP_Ub;
  enddef;
  def map between MisP_Ub and v49 for
    vars v49 and v49;
    vars MisP_Ub and MisP_Ub;
  enddef;
  def map between MisP_Ub and v57 for
    vars v57 and v57;
    vars MisP_Ub and MisP_Ub;
  enddef;
  def map between MisP_Ub and v65 for
    vars v65 and v65;
    vars MisP_Ub and MisP_Ub;
  enddef;
  def map between MisP_Ub and v66 for
    vars v66 and v66;
    vars MisP_Ub and MisP_Ub;
  enddef;
  def map between MisP_Ub and v67 for
    vars v67 and v67;
    vars MisP_Ub and MisP_Ub;
  enddef;
  def map between MisP_Ub and v68 for
    vars v68 and v68;
    vars MisP_Ub and MisP_Ub;
  enddef;
  def map between MisP_Ub and v69 for
    vars v69 and v69;
    vars MisP_Ub and MisP_Ub;
  enddef;
  def map between MisP_Ub and v70 for
    vars v70 and v70;
    vars MisP_Ub and MisP_Ub;
  enddef;
  def map between MisP_Ub and v71 for
    vars v71 and v71;
    vars MisP_Ub and MisP_Ub;
  enddef;
  def map between MisP_Ub2 and v9 for
    vars v9 and v9;
  enddef;
  def map between MisP_Ub2 and v21 for
    vars v21 and v21;
  enddef;
  def map between MisP_Ub2 and v10 for
    vars v10 and v10;
    vars MisP_Ub2 and MisP_Ub2;
  enddef;
  def map between MisP_Ub2 and v22 for
    vars v22 and v22;
    vars MisP_Ub2 and MisP_Ub2;
  enddef;
  def map between MisP_Ub2 and v42 for
    vars v42 and v42;
    vars MisP_Ub2 and MisP_Ub2;
  enddef;
  def map between MisP_Ub2 and v50 for
    vars v50 and v50;
    vars MisP_Ub2 and MisP_Ub2;
  enddef;
  def map between MisP_Ub2 and v58 for
    vars v58 and v58;
    vars MisP_Ub2 and MisP_Ub2;
  enddef;
  def map between MisP_Ub2 and v65 for
    vars v65 and v65;
    vars MisP_Ub2 and MisP_Ub2;
  enddef;
  def map between MisP_Ub2 and v72 for
    vars v72 and v72;
    vars MisP_Ub2 and MisP_Ub2;
  enddef;
  def map between MisP_Ub2 and v73 for
    vars v73 and v73;
    vars MisP_Ub2 and MisP_Ub2;
  enddef;
  def map between MisP_Ub2 and v74 for
    vars v74 and v74;
    vars MisP_Ub2 and MisP_Ub2;
  enddef;
  def map between MisP_Ub2 and v75 for
    vars v75 and v75;
    vars MisP_Ub2 and MisP_Ub2;
  enddef;
  def map between MisP_Ub2 and v76 for
    vars v76 and v76;
    vars MisP_Ub2 and MisP_Ub2;
  enddef;
  def map between MisP_Ub2 and v77 for
    vars v77 and v77;
    vars MisP_Ub2 and MisP_Ub2;
  enddef;
  def map between MisP_Ub3 and v10 for
    vars v10 and v10;
  enddef;
  def map between MisP_Ub3 and v20 for
    vars v20 and v20;
  enddef;
  def map between MisP_Ub3 and v29 for
    vars v29 and v29;
  enddef;
  def map between MisP_Ub3 and v11 for
    vars v11 and v11;
    vars MisP_Ub3 and MisP_Ub3;
  enddef;
  def map between MisP_Ub3 and v21 for
    vars v21 and v21;
    vars MisP_Ub3 and MisP_Ub3;
  enddef;
  def map between MisP_Ub3 and v43 for
    vars v43 and v43;
    vars MisP_Ub3 and MisP_Ub3;
  enddef;
  def map between MisP_Ub3 and v51 for
    vars v51 and v51;
    vars MisP_Ub3 and MisP_Ub3;
  enddef;
  def map between MisP_Ub3 and v59 for
    vars v59 and v59;
    vars MisP_Ub3 and MisP_Ub3;
  enddef;
  def map between MisP_Ub3 and v66 for
    vars v66 and v66;
    vars MisP_Ub3 and MisP_Ub3;
  enddef;
  def map between MisP_Ub3 and v72 for
    vars v72 and v72;
    vars MisP_Ub3 and MisP_Ub3;
  enddef;
  def map between MisP_Ub3 and v78 for
    vars v78 and v78;
    vars MisP_Ub3 and MisP_Ub3;
  enddef;
  def map between MisP_Ub3 and v79 for
    vars v79 and v79;
    vars MisP_Ub3 and MisP_Ub3;
  enddef;
  def map between MisP_Ub3 and v80 for
    vars v80 and v80;
    vars MisP_Ub3 and MisP_Ub3;
  enddef;
  def map between MisP_Ub3 and v81 for
    vars v81 and v81;
    vars MisP_Ub3 and MisP_Ub3;
  enddef;
  def map between MisP_Ub3 and v82 for
    vars v82 and v82;
    vars MisP_Ub3 and MisP_Ub3;
  enddef;
  def map between MisP_Ub4 and v11 for
    vars v11 and v11;
  enddef;
  def map between MisP_Ub4 and v19 for
    vars v19 and v19;
  enddef;
  def map between MisP_Ub4 and v12 for
    vars v12 and v12;
    vars MisP_Ub4 and MisP_Ub4;
  enddef;
  def map between MisP_Ub4 and v20 for
    vars v20 and v20;
    vars MisP_Ub4 and MisP_Ub4;
  enddef;
  def map between MisP_Ub4 and v24 for
    vars v24 and v24;
    vars MisP_Ub4 and MisP_Ub4;
  enddef;
  def map between MisP_Ub4 and v44 for
    vars v44 and v44;
    vars MisP_Ub4 and MisP_Ub4;
  enddef;
  def map between MisP_Ub4 and v52 for
    vars v52 and v52;
    vars MisP_Ub4 and MisP_Ub4;
  enddef;
  def map between MisP_Ub4 and v60 for
    vars v60 and v60;
    vars MisP_Ub4 and MisP_Ub4;
  enddef;
  def map between MisP_Ub4 and v67 for
    vars v67 and v67;
    vars MisP_Ub4 and MisP_Ub4;
  enddef;
  def map between MisP_Ub4 and v73 for
    vars v73 and v73;
    vars MisP_Ub4 and MisP_Ub4;
  enddef;
  def map between MisP_Ub4 and v78 for
    vars v78 and v78;
    vars MisP_Ub4 and MisP_Ub4;
  enddef;
  def map between MisP_Ub4 and v83 for
    vars v83 and v83;
    vars MisP_Ub4 and MisP_Ub4;
  enddef;
  def map between MisP_Ub4 and v84 for
    vars v84 and v84;
    vars MisP_Ub4 and MisP_Ub4;
  enddef;
  def map between MisP_Ub4 and v85 for
    vars v85 and v85;
    vars MisP_Ub4 and MisP_Ub4;
  enddef;
  def map between MisP_Ub4 and v86 for
    vars v86 and v86;
    vars MisP_Ub4 and MisP_Ub4;
  enddef;
  def map between MisP_Ub5 and v12 for
    vars v12 and v12;
  enddef;
  def map between MisP_Ub5 and v18 for
    vars v18 and v18;
  enddef;
  def map between MisP_Ub5 and v13 for
    vars v13 and v13;
    vars MisP_Ub5 and MisP_Ub5;
  enddef;
  def map between MisP_Ub5 and v19 for
    vars v19 and v19;
    vars MisP_Ub5 and MisP_Ub5;
  enddef;
  def map between MisP_Ub5 and v25 for
    vars v25 and v25;
    vars MisP_Ub5 and MisP_Ub5;
  enddef;
  def map between MisP_Ub5 and v45 for
    vars v45 and v45;
    vars MisP_Ub5 and MisP_Ub5;
  enddef;
  def map between MisP_Ub5 and v53 for
    vars v53 and v53;
    vars MisP_Ub5 and MisP_Ub5;
  enddef;
  def map between MisP_Ub5 and v61 for
    vars v61 and v61;
    vars MisP_Ub5 and MisP_Ub5;
  enddef;
  def map between MisP_Ub5 and v68 for
    vars v68 and v68;
    vars MisP_Ub5 and MisP_Ub5;
  enddef;
  def map between MisP_Ub5 and v74 for
    vars v74 and v74;
    vars MisP_Ub5 and MisP_Ub5;
  enddef;
  def map between MisP_Ub5 and v79 for
    vars v79 and v79;
    vars MisP_Ub5 and MisP_Ub5;
  enddef;
  def map between MisP_Ub5 and v83 for
    vars v83 and v83;
    vars MisP_Ub5 and MisP_Ub5;
  enddef;
  def map between MisP_Ub5 and v87 for
    vars v87 and v87;
    vars MisP_Ub5 and MisP_Ub5;
  enddef;
  def map between MisP_Ub5 and v88 for
    vars v88 and v88;
    vars MisP_Ub5 and MisP_Ub5;
  enddef;
  def map between MisP_Ub5 and v89 for
    vars v89 and v89;
    vars MisP_Ub5 and MisP_Ub5;
  enddef;
  def map between MisP_Ub6 and v13 for
    vars v13 and v13;
  enddef;
  def map between MisP_Ub6 and v17 for
    vars v17 and v17;
  enddef;
  def map between MisP_Ub6 and v14 for
    vars v14 and v14;
    vars MisP_Ub6 and MisP_Ub6;
  enddef;
  def map between MisP_Ub6 and v18 for
    vars v18 and v18;
    vars MisP_Ub6 and MisP_Ub6;
  enddef;
  def map between MisP_Ub6 and v26 for
    vars v26 and v26;
    vars MisP_Ub6 and MisP_Ub6;
  enddef;
  def map between MisP_Ub6 and v46 for
    vars v46 and v46;
    vars MisP_Ub6 and MisP_Ub6;
  enddef;
  def map between MisP_Ub6 and v54 for
    vars v54 and v54;
    vars MisP_Ub6 and MisP_Ub6;
  enddef;
  def map between MisP_Ub6 and v62 for
    vars v62 and v62;
    vars MisP_Ub6 and MisP_Ub6;
  enddef;
  def map between MisP_Ub6 and v69 for
    vars v69 and v69;
    vars MisP_Ub6 and MisP_Ub6;
  enddef;
  def map between MisP_Ub6 and v75 for
    vars v75 and v75;
    vars MisP_Ub6 and MisP_Ub6;
  enddef;
  def map between MisP_Ub6 and v80 for
    vars v80 and v80;
    vars MisP_Ub6 and MisP_Ub6;
  enddef;
  def map between MisP_Ub6 and v84 for
    vars v84 and v84;
    vars MisP_Ub6 and MisP_Ub6;
  enddef;
  def map between MisP_Ub6 and v87 for
    vars v87 and v87;
    vars MisP_Ub6 and MisP_Ub6;
  enddef;
  def map between MisP_Ub6 and v90 for
    vars v90 and v90;
    vars MisP_Ub6 and MisP_Ub6;
  enddef;
  def map between MisP_Ub6 and v91 for
    vars v91 and v91;
    vars MisP_Ub6 and MisP_Ub6;
  enddef;
  def map between MisP_Ub7 and v14 for
    vars v14 and v14;
  enddef;
  def map between MisP_Ub7 and v16 for
    vars v16 and v16;
  enddef;
  def map between MisP_Ub7 and v15 for
    vars v15 and v15;
    vars MisP_Ub7 and MisP_Ub7;
  enddef;
  def map between MisP_Ub7 and v17 for
    vars v17 and v17;
    vars MisP_Ub7 and MisP_Ub7;
  enddef;
  def map between MisP_Ub7 and v27 for
    vars v27 and v27;
    vars MisP_Ub7 and MisP_Ub7;
  enddef;
  def map between MisP_Ub7 and v47 for
    vars v47 and v47;
    vars MisP_Ub7 and MisP_Ub7;
  enddef;
  def map between MisP_Ub7 and v55 for
    vars v55 and v55;
    vars MisP_Ub7 and MisP_Ub7;
  enddef;
  def map between MisP_Ub7 and v63 for
    vars v63 and v63;
    vars MisP_Ub7 and MisP_Ub7;
  enddef;
  def map between MisP_Ub7 and v70 for
    vars v70 and v70;
    vars MisP_Ub7 and MisP_Ub7;
  enddef;
  def map between MisP_Ub7 and v76 for
    vars v76 and v76;
    vars MisP_Ub7 and MisP_Ub7;
  enddef;
  def map between MisP_Ub7 and v81 for
    vars v81 and v81;
    vars MisP_Ub7 and MisP_Ub7;
  enddef;
  def map between MisP_Ub7 and v85 for
    vars v85 and v85;
    vars MisP_Ub7 and MisP_Ub7;
  enddef;
  def map between MisP_Ub7 and v88 for
    vars v88 and v88;
    vars MisP_Ub7 and MisP_Ub7;
  enddef;
  def map between MisP_Ub7 and v90 for
    vars v90 and v90;
    vars MisP_Ub7 and MisP_Ub7;
  enddef;
  def map between MisP_Ub7 and v92 for
    vars v92 and v92;
    vars MisP_Ub7 and MisP_Ub7;
  enddef;
  def map between MisP_Ub8 and v15 for
    vars v15 and v15;
  enddef;
  def map between MisP_Ub8 and v16 for
    vars v16 and v16;
    vars MisP_Ub8 and MisP_Ub8;
  enddef;
  def map between MisP_Ub8 and v28 for
    vars v28 and v28;
    vars MisP_Ub8 and MisP_Ub8;
  enddef;
  def map between MisP_Ub8 and v48 for
    vars v48 and v48;
    vars MisP_Ub8 and MisP_Ub8;
  enddef;
  def map between MisP_Ub8 and v56 for
    vars v56 and v56;
    vars MisP_Ub8 and MisP_Ub8;
  enddef;
  def map between MisP_Ub8 and v64 for
    vars v64 and v64;
    vars MisP_Ub8 and MisP_Ub8;
  enddef;
  def map between MisP_Ub8 and v71 for
    vars v71 and v71;
    vars MisP_Ub8 and MisP_Ub8;
  enddef;
  def map between MisP_Ub8 and v77 for
    vars v77 and v77;
    vars MisP_Ub8 and MisP_Ub8;
  enddef;
  def map between MisP_Ub8 and v82 for
    vars v82 and v82;
    vars MisP_Ub8 and MisP_Ub8;
  enddef;
  def map between MisP_Ub8 and v86 for
    vars v86 and v86;
    vars MisP_Ub8 and MisP_Ub8;
  enddef;
  def map between MisP_Ub8 and v89 for
    vars v89 and v89;
    vars MisP_Ub8 and MisP_Ub8;
  enddef;
  def map between MisP_Ub8 and v91 for
    vars v91 and v91;
    vars MisP_Ub8 and MisP_Ub8;
  enddef;
  def map between MisP_Ub8 and v92 for
    vars v92 and v92;
    vars MisP_Ub8 and MisP_Ub8;
  enddef;
  def map between MisP_Ub4_Proteasome and v24 for
    vars v24 and v24;
  enddef;
  def map between MisP_Ub4_Proteasome and v30 for
    vars v30 and v30;
  enddef;
  def map between MisP_Ub4_Proteasome and v29 for
    vars v29 and v29;
    vars MisP_Ub4_Proteasome and MisP_Ub4_Proteasome;
  enddef;
  def map between MisP_Ub4_Proteasome and v34 for
    vars v34 and v34;
    vars MisP_Ub4_Proteasome and MisP_Ub4_Proteasome;
  enddef;
  def map between MisP_Ub5_Proteasome and v25 for
    vars v25 and v25;
  enddef;
  def map between MisP_Ub5_Proteasome and v31 for
    vars v31 and v31;
  enddef;
  def map between MisP_Ub5_Proteasome and v30 for
    vars v30 and v30;
    vars MisP_Ub5_Proteasome and MisP_Ub5_Proteasome;
  enddef;
  def map between MisP_Ub5_Proteasome and v35 for
    vars v35 and v35;
    vars MisP_Ub5_Proteasome and MisP_Ub5_Proteasome;
  enddef;
  def map between MisP_Ub6_Proteasome and v26 for
    vars v26 and v26;
  enddef;
  def map between MisP_Ub6_Proteasome and v32 for
    vars v32 and v32;
  enddef;
  def map between MisP_Ub6_Proteasome and v31 for
    vars v31 and v31;
    vars MisP_Ub6_Proteasome and MisP_Ub6_Proteasome;
  enddef;
  def map between MisP_Ub6_Proteasome and v36 for
    vars v36 and v36;
    vars MisP_Ub6_Proteasome and MisP_Ub6_Proteasome;
  enddef;
  def map between MisP_Ub7_Proteasome and v27 for
    vars v27 and v27;
  enddef;
  def map between MisP_Ub7_Proteasome and v33 for
    vars v33 and v33;
  enddef;
  def map between MisP_Ub7_Proteasome and v32 for
    vars v32 and v32;
    vars MisP_Ub7_Proteasome and MisP_Ub7_Proteasome;
  enddef;
  def map between MisP_Ub7_Proteasome and v37 for
    vars v37 and v37;
    vars MisP_Ub7_Proteasome and MisP_Ub7_Proteasome;
  enddef;
  def map between MisP_Ub8_Proteasome and v28 for
    vars v28 and v28;
  enddef;
  def map between MisP_Ub8_Proteasome and v33 for
    vars v33 and v33;
    vars MisP_Ub8_Proteasome and MisP_Ub8_Proteasome;
  enddef;
  def map between MisP_Ub8_Proteasome and v38 for
    vars v38 and v38;
    vars MisP_Ub8_Proteasome and MisP_Ub8_Proteasome;
  enddef;
  def map between degUb4 and v34 for
    vars v34 and v34;
  enddef;
  def map between degUb5 and v35 for
    vars v35 and v35;
  enddef;
  def map between degUb6 and v36 for
    vars v36 and v36;
  enddef;
  def map between degUb7 and v37 for
    vars v37 and v37;
  enddef;
  def map between degUb8 and v38 for
    vars v38 and v38;
  enddef;
  def map between MisP_total and v2 for
    vars v2 and v2;
  enddef;
  def map between NatP_refolded and v3 for
    vars v3 and v3;
  enddef;
  def map between AggP and v39 for
    vars v39 and v39;
  enddef;
  def map between AggP and v40 for
    vars v40 and v40;
    vars AggP and AggP;
  enddef;
  def map between AggP and v41 for
    vars v41 and v41;
  enddef;
  def map between AggP and v42 for
    vars v42 and v42;
  enddef;
  def map between AggP and v43 for
    vars v43 and v43;
  enddef;
  def map between AggP and v44 for
    vars v44 and v44;
  enddef;
  def map between AggP and v45 for
    vars v45 and v45;
  enddef;
  def map between AggP and v46 for
    vars v46 and v46;
  enddef;
  def map between AggP and v47 for
    vars v47 and v47;
  enddef;
  def map between AggP and v48 for
    vars v48 and v48;
  enddef;
  def map between AggP and v49 for
    vars v49 and v49;
  enddef;
  def map between AggP and v50 for
    vars v50 and v50;
  enddef;
  def map between AggP and v51 for
    vars v51 and v51;
  enddef;
  def map between AggP and v52 for
    vars v52 and v52;
  enddef;
  def map between AggP and v53 for
    vars v53 and v53;
  enddef;
  def map between AggP and v54 for
    vars v54 and v54;
  enddef;
  def map between AggP and v55 for
    vars v55 and v55;
  enddef;
  def map between AggP and v56 for
    vars v56 and v56;
  enddef;
  def map between AggP and v57 for
    vars v57 and v57;
    vars AggP and AggP;
  enddef;
  def map between AggP and v58 for
    vars v58 and v58;
    vars AggP and AggP;
  enddef;
  def map between AggP and v59 for
    vars v59 and v59;
    vars AggP and AggP;
  enddef;
  def map between AggP and v60 for
    vars v60 and v60;
    vars AggP and AggP;
  enddef;
  def map between AggP and v61 for
    vars v61 and v61;
    vars AggP and AggP;
  enddef;
  def map between AggP and v62 for
    vars v62 and v62;
    vars AggP and AggP;
  enddef;
  def map between AggP and v63 for
    vars v63 and v63;
    vars AggP and AggP;
  enddef;
  def map between AggP and v64 for
    vars v64 and v64;
    vars AggP and AggP;
  enddef;
  def map between AggP and v65 for
    vars v65 and v65;
  enddef;
  def map between AggP and v66 for
    vars v66 and v66;
  enddef;
  def map between AggP and v67 for
    vars v67 and v67;
  enddef;
  def map between AggP and v68 for
    vars v68 and v68;
  enddef;
  def map between AggP and v69 for
    vars v69 and v69;
  enddef;
  def map between AggP and v70 for
    vars v70 and v70;
  enddef;
  def map between AggP and v71 for
    vars v71 and v71;
  enddef;
  def map between AggP and v72 for
    vars v72 and v72;
  enddef;
  def map between AggP and v73 for
    vars v73 and v73;
  enddef;
  def map between AggP and v74 for
    vars v74 and v74;
  enddef;
  def map between AggP and v75 for
    vars v75 and v75;
  enddef;
  def map between AggP and v76 for
    vars v76 and v76;
  enddef;
  def map between AggP and v77 for
    vars v77 and v77;
  enddef;
  def map between AggP and v78 for
    vars v78 and v78;
  enddef;
  def map between AggP and v79 for
    vars v79 and v79;
  enddef;
  def map between AggP and v80 for
    vars v80 and v80;
  enddef;
  def map between AggP and v81 for
    vars v81 and v81;
  enddef;
  def map between AggP and v82 for
    vars v82 and v82;
  enddef;
  def map between AggP and v83 for
    vars v83 and v83;
  enddef;
  def map between AggP and v84 for
    vars v84 and v84;
  enddef;
  def map between AggP and v85 for
    vars v85 and v85;
  enddef;
  def map between AggP and v86 for
    vars v86 and v86;
  enddef;
  def map between AggP and v87 for
    vars v87 and v87;
  enddef;
  def map between AggP and v88 for
    vars v88 and v88;
  enddef;
  def map between AggP and v89 for
    vars v89 and v89;
  enddef;
  def map between AggP and v90 for
    vars v90 and v90;
  enddef;
  def map between AggP and v91 for
    vars v91 and v91;
  enddef;
  def map between AggP and v92 for
    vars v92 and v92;
  enddef;
  def map between AggP and v93 for
    vars v93 and v93;
    vars AggP and AggP;
  enddef;
  def map between AggP and v94 for
    vars v94 and v94;
    vars AggP and AggP;
  enddef;
  def map between SeqAggP and v93 for
    vars v93 and v93;
  enddef;
  def map between AggP_Proteasome and v94 for
    vars v94 and v94;
  enddef;
  def map between v6 and ATP for
    vars ATP and ATP;
  enddef;
  def map between v34 and ATP for
    vars ATP and ATP;
  enddef;
  def map between v35 and ATP for
    vars ATP and ATP;
  enddef;
  def map between v36 and ATP for
    vars ATP and ATP;
  enddef;
  def map between v37 and ATP for
    vars ATP and ATP;
  enddef;
  def map between v38 and ATP for
    vars ATP and ATP;
  enddef;
  def map between v1 and kinetic_parameters for
    vars k1 and k1;
  enddef;
  def map between v2 and kinetic_parameters for
    vars k2 and k2;
  enddef;
  def map between v3 and kinetic_parameters for
    vars k3 and k3;
  enddef;
  def map between v4 and kinetic_parameters for
    vars k61 and k61;
  enddef;
  def map between v5 and kinetic_parameters for
    vars k61r and k61r;
  enddef;
  def map between v6 and kinetic_parameters for
    vars k62 and k62;
  enddef;
  def map between v7 and kinetic_parameters for
    vars k63 and k63;
  enddef;
  def map between v8 and kinetic_parameters for
    vars k64 and k64;
  enddef;
  def map between v9 and kinetic_parameters for
    vars k65 and k65;
  enddef;
  def map between v10 and kinetic_parameters for
    vars k65 and k65;
  enddef;
  def map between v11 and kinetic_parameters for
    vars k65 and k65;
  enddef;
  def map between v12 and kinetic_parameters for
    vars k65 and k65;
  enddef;
  def map between v13 and kinetic_parameters for
    vars k65 and k65;
  enddef;
  def map between v14 and kinetic_parameters for
    vars k65 and k65;
  enddef;
  def map between v15 and kinetic_parameters for
    vars k65 and k65;
  enddef;
  def map between v16 and kinetic_parameters for
    vars k66 and k66;
  enddef;
  def map between v17 and kinetic_parameters for
    vars k66 and k66;
  enddef;
  def map between v18 and kinetic_parameters for
    vars k66 and k66;
  enddef;
  def map between v19 and kinetic_parameters for
    vars k66 and k66;
  enddef;
  def map between v20 and kinetic_parameters for
    vars k66 and k66;
  enddef;
  def map between v21 and kinetic_parameters for
    vars k66 and k66;
  enddef;
  def map between v22 and kinetic_parameters for
    vars k66 and k66;
  enddef;
  def map between v23 and kinetic_parameters for
    vars k66 and k66;
  enddef;
  def map between v24 and kinetic_parameters for
    vars k67 and k67;
  enddef;
  def map between v25 and kinetic_parameters for
    vars k67 and k67;
  enddef;
  def map between v26 and kinetic_parameters for
    vars k67 and k67;
  enddef;
  def map between v27 and kinetic_parameters for
    vars k67 and k67;
  enddef;
  def map between v28 and kinetic_parameters for
    vars k67 and k67;
  enddef;
  def map between v29 and kinetic_parameters for
    vars k68 and k68;
  enddef;
  def map between v30 and kinetic_parameters for
    vars k68 and k68;
  enddef;
  def map between v31 and kinetic_parameters for
    vars k68 and k68;
  enddef;
  def map between v32 and kinetic_parameters for
    vars k68 and k68;
  enddef;
  def map between v33 and kinetic_parameters for
    vars k68 and k68;
  enddef;
  def map between v34 and kinetic_parameters for
    vars k69 and k69;
  enddef;
  def map between v35 and kinetic_parameters for
    vars k69 and k69;
  enddef;
  def map between v36 and kinetic_parameters for
    vars k69 and k69;
  enddef;
  def map between v37 and kinetic_parameters for
    vars k69 and k69;
  enddef;
  def map between v38 and kinetic_parameters for
    vars k69 and k69;
  enddef;
  def map between v39 and kinetic_parameters for
    vars k71 and k71;
  enddef;
  def map between v40 and kinetic_parameters for
    vars k71 and k71;
  enddef;
  def map between v41 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v42 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v43 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v44 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v45 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v46 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v47 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v48 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v49 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v50 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v51 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v52 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v53 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v54 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v55 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v56 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v57 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v58 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v59 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v60 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v61 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v62 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v63 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v64 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v65 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v66 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v67 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v68 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v69 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v70 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v71 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v72 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v73 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v74 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v75 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v76 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v77 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v78 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v79 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v80 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v81 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v82 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v83 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v84 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v85 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v86 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v87 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v88 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v89 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v90 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v91 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v92 and kinetic_parameters for
    vars k72 and k72;
  enddef;
  def map between v93 and kinetic_parameters for
    vars k73 and k73;
  enddef;
  def map between v94 and kinetic_parameters for
    vars k74 and k74;
  enddef;
enddef;
