<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  wanant_bimolecular_model_2000.xml

CREATED :  15th October 2002

LAST MODIFIED : 9th April 2003

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of Wanant and Quon's
2000 divalent receptor model of insulin-receptor binding kinetics.

CHANGES:  
  09/04/2003 - AAC - Added publication date information.  

--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xmlns:ns7="http://www.cellml.org/metadata/simulation/1.0#"  cmeta:id="wanant_2000" name="wanant_2000">
  <documentation xmlns="http://cellml.org/tmp-documentation">
    <article>
      <articleinfo>
        <title>Insulin receptor binding kinetics: modeling and simulation studies</title>
        <author>
          <firstname>James</firstname>
          <surname>Lawson</surname>
          <affiliation>
            <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
          </affiliation>
        </author>
      </articleinfo>
      <section id="sec_status">
        <title>Model Status</title>
        <para> 
            This CellML model runs in both OpenCell and COR and represents the divalent receptor model from the original published paper (equations 4-7). The units have been checked and they are consistent. In the absence of published initial conditions for x1-x4 arbitary values have been used. The simulation output from this model does not match the published paper.  
          </para>
      </section>
      <sect1 id="sec_structure">
        <title>Model Structure</title>
        <para>
ABSTRACT: Biological actions of insulin regulate glucose metabolism and other essential physiological functions. Binding of insulin to its cell surface receptor initiates signal transduction pathways that mediate cellular responses. Thus, it is of great interest to understand the mechanisms underlying insulin receptor binding kinetics. Interestingly, negative cooperative interactions are observed at high insulin concentrations while positive cooperativity may be present at low insulin concentrations. Clearly, insulin receptor binding kinetics cannot be simply explained by a classical bimolecular reaction. Mature insulin receptors have a dimeric structure capable of binding two molecules of insulin. The binding affinity of the receptor for the second insulin molecule is significantly lower than for the first bound insulin molecule. In addition, insulin receptor aggregation occurs in response to ligand binding and aggregation may also influence binding kinetics. In this study, we develop a mathematical model for insulin receptor binding kinetics that explicitly represents the divalent nature of the insulin receptor and incorporates receptor aggregation into the kinetic model. Model parameters are based upon published data where available. Computer simulations with our model are capable of reproducing both negative and positive cooperativity at the appropriate insulin concentrations. This model may be a useful tool for helping to understand the mechanisms underlying insulin receptor binding and the coupling of receptor binding to downstream signaling events. 
</para>
        
        <para>
The original paper reference is cited below:
</para>
        <para>
Insulin receptor binding kinetics: modeling and simulation studies, Sumanas Wanant and Michael J. Quon, 2000, <emphasis>Journal of Theoretical Biology</emphasis>, 205, 355-364.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=10882558&amp;dopt=Abstract">PubMed ID: 10882558</ulink>
        </para>
        
        <informalfigure float="0" id="fig_receptor_diagram">
          <mediaobject>
            <imageobject>
              <objectinfo>
                <title>diagram of the divalent receptor model</title>
              </objectinfo>
              <imagedata fileref="wanant_2000.png"/>
            </imageobject>
          </mediaobject>
          <caption>A schematic diagram of Wanant and Quon's 2000 divalent receptor model.</caption>
        </informalfigure>
      </sect1>
    </article>
  </documentation>

  <units name="molar">
    <unit units="mole"/>
    <unit units="litre" exponent="-1"/>
  </units>
  <units name="nanomolar">
    <unit units="mole" prefix="nano"/>
    <unit units="litre" exponent="-1"/>
  </units>
  <units name="flux">
    <unit units="molar"/>
    <unit units="second" exponent="-1"/>
  </units>
  <units name="first_order_rate_constant">
    <unit units="second" exponent="-1"/>
  </units>
  <units name="second_order_rate_constant">
    <unit units="molar" exponent="-1"/>
    <unit units="second" exponent="-1"/>
  </units>

  <component name="environment">
    <variable units="second" public_interface="out" name="time"/>
  </component>

  <component cmeta:id="insulin" name="insulin">
    <variable units="nanomolar" public_interface="out" name="x1" initial_value="1000"/>
    
	<variable units="dimensionless" name="scatchard"/>
    
	<variable units="second" public_interface="in" name="time"/>
	<variable units="second_order_rate_constant" public_interface="in" name="k1"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k1_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k2_"/>
    <variable units="nanomolar" public_interface="in" name="x2"/>
    <variable units="nanomolar" public_interface="in" name="x3"/>
    <variable units="nanomolar" public_interface="in" name="x4"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k2"/>
    
	<math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>x1</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <minus/>
              <apply>
                <times/>
                <ci>k1_</ci>
                <ci>x3</ci>
              </apply>
              <apply>
                <times/>
                <ci>k1</ci>
                <ci>x1</ci>
                <ci>x2</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>k2_</ci>
              <ci>x4</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>k2</ci>
            <ci>x1</ci>
            <ci>x3</ci>
          </apply>
        </apply>
      </apply>
    </math>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>scatchard</ci>
        <apply>
          <divide/>
          <apply>
            <plus/>
            <ci>x3</ci>
            <ci>x4</ci>
          </apply>
          <ci>x1</ci>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="unbound_receptor" name="unbound_receptor">
    <variable units="nanomolar" public_interface="out" name="x2" initial_value="0.1"/>
    <variable units="second" public_interface="in" name="time"/>
    <variable units="nanomolar" public_interface="in" name="x1"/>
    <variable units="nanomolar" public_interface="in" name="x3"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k1_"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>x2</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>k1_</ci>
            <ci>x3</ci>
          </apply>
          <apply>
            <times/>
            <ci>k1</ci>
            <ci>x1</ci>
            <ci>x2</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="single_bound_receptor" name="single_bound_receptor">
    <variable units="nanomolar" public_interface="out" name="x3" initial_value="0.0"/>
    <variable units="second" public_interface="in" name="time"/>
    <variable units="nanomolar" public_interface="in" name="x1"/>
    <variable units="nanomolar" public_interface="in" name="x2"/>
    <variable units="nanomolar" public_interface="in" name="x4"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k1_"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k2"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k2_"/>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>x3</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <minus/>
              <apply>
                <times/>
                <ci>k1</ci>
                <ci>x1</ci>
                <ci>x2</ci>
              </apply>
              <apply>
                <times/>
                <ci>k1_</ci>
                <ci>x3</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>k2_</ci>
              <ci>x4</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>k2</ci>
            <ci>x1</ci>
            <ci>x3</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="double_bound_receptor" name="double_bound_receptor">
    <variable units="nanomolar" public_interface="out" name="x4" initial_value="0.0"/>
    
	<variable units="second" public_interface="in" name="time"/>
	<variable units="nanomolar" public_interface="in" name="x1"/>
    <variable units="nanomolar" public_interface="in" name="x3"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k2"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k2_"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>x4</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>k2</ci>
            <ci>x1</ci>
            <ci>x3</ci>
          </apply>
          <apply>
            <times/>
            <ci>k2_</ci>
            <ci>x4</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>

  <component name="rate_constants">
    <variable units="second_order_rate_constant" public_interface="out" name="k1" initial_value="1000000"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k1_" initial_value="0.0004"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k2" initial_value="1000000"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k2_" initial_value="0.04"/>
  </component>
  
  
  <connection>
    <map_components component_2="environment" component_1="insulin"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  <connection>
    <map_components component_2="environment" component_1="unbound_receptor"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  <connection>
    <map_components component_2="environment" component_1="single_bound_receptor"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  <connection>
    <map_components component_2="environment" component_1="double_bound_receptor"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  <connection>
    <map_components component_2="insulin" component_1="rate_constants"/>
	<map_variables variable_2="k1" variable_1="k1"/>
    <map_variables variable_2="k1_" variable_1="k1_"/>
    <map_variables variable_2="k2" variable_1="k2"/>
    <map_variables variable_2="k2_" variable_1="k2_"/>
  </connection>
  <connection>
    <map_components component_2="insulin" component_1="unbound_receptor"/>
    <map_variables variable_2="x1" variable_1="x1"/>
	<map_variables variable_2="x2" variable_1="x2"/>
  </connection>
  <connection>
    <map_components component_2="insulin" component_1="single_bound_receptor"/>
    <map_variables variable_2="x3" variable_1="x3"/>
	<map_variables variable_2="x1" variable_1="x1"/>
  </connection>
  <connection>
    <map_components component_2="insulin" component_1="double_bound_receptor"/>
    <map_variables variable_2="x4" variable_1="x4"/>
	<map_variables variable_2="x1" variable_1="x1"/>
  </connection>
  <connection>
    <map_components component_2="unbound_receptor" component_1="rate_constants"/>
    <map_variables variable_2="k1" variable_1="k1"/>
    <map_variables variable_2="k1_" variable_1="k1_"/>
  </connection>
  <connection>
    <map_components component_2="unbound_receptor" component_1="single_bound_receptor"/>
    <map_variables variable_2="x3" variable_1="x3"/>
	<map_variables variable_2="x2" variable_1="x2"/>
  </connection>
  <connection>
    <map_components component_2="single_bound_receptor" component_1="rate_constants"/>
    <map_variables variable_2="k1" variable_1="k1"/>
    <map_variables variable_2="k1_" variable_1="k1_"/>
    <map_variables variable_2="k2" variable_1="k2"/>
    <map_variables variable_2="k2_" variable_1="k2_"/>
  </connection>
  <connection>
    <map_components component_2="single_bound_receptor" component_1="double_bound_receptor"/>
    <map_variables variable_2="x4" variable_1="x4"/>
	<map_variables variable_2="x3" variable_1="x3"/>
  </connection>
  <connection>
    <map_components component_2="double_bound_receptor" component_1="rate_constants"/>
    <map_variables variable_2="k2" variable_1="k2"/>
    <map_variables variable_2="k2_" variable_1="k2_"/>
  </connection>
 


<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#39fe56e6-29bf-46cb-97a3-dbc04afda4aa">
    <rdf:li rdf:resource="rdf:#d4dca2e8-ca1d-4622-99bc-9f7a77bc633f"/>
    <rdf:li rdf:resource="rdf:#2bad6803-eb75-4a54-ac01-d9697851d665"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#39fe56e6-29bf-46cb-97a3-dbc04afda4aa"/>
  <rdf:Bag rdf:about="rdf:#a576e71b-0d58-45c7-ad14-5dfbbc936d46">
    <rdf:li>insulin receptor</rdf:li>
    <rdf:li>signal transduction</rdf:li>
    <rdf:li>pharmacology</rdf:li>
    <rdf:li>insulin</rdf:li>
    <rdf:li>insulin receptor binding kinetics</rdf:li>
  </rdf:Bag>
  <rdf:Description rdf:about="rdf:#a576e71b-0d58-45c7-ad14-5dfbbc936d46"/>
  <rdf:Description rdf:about="rdf:#e72b9de6-a691-448b-b89a-3ca6dd8676ba">
    <dcterms:modified rdf:resource="rdf:#4565f676-4ba9-4d94-b8c7-929bedf6ae26"/>
    <rdf:value>Added publication date information.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#2ae7a79e-1655-476b-8fd4-113b64546677"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#76a6c025-5598-4a1b-ac9f-53dda1efbb34">
    <dc:creator rdf:resource="rdf:#88236968-3b0d-4812-88aa-b97d204eace8"/>
    <rdf:value>This is the CellML description of Wanant and Quon's 2000 divalent receptor model of insulin-receptor binding kinetics.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#94bbcc82-dc7b-4693-860b-1f8267caede0">
    <vCard:FN>James Lawson</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5f600d73-d5e9-4e46-b772-d047506f73de">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c5b2f9a2-135d-4923-8509-5dbdcce6540d">
    <dc:subject rdf:resource="rdf:#b2d1caed-a1d5-4ee1-8440-76e2619c8241"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#$oEFyV1">
    <ns7:boundIntervals rdf:resource="rdf:#$pEFyV1"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a97dd2fb-4d07-4859-be50-7f2be4d93d60">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#$pEFyV1">
    <rdf:rest rdf:resource="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
    <rdf:first rdf:resource="rdf:#$qEFyV1"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#85ff81b4-e56c-4a9e-8bda-f42c760faa41">
    <dc:title>Journal of theoretical Biology</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#31147dff-21a1-4f61-86b8-51204d3c8e17">
    <vCard:N rdf:resource="rdf:#5f600d73-d5e9-4e46-b772-d047506f73de"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#024f77e4-f07d-4135-8e54-04354dba910b">
    <vCard:Given>Autumn</vCard:Given>
    <vCard:Family>Cuellar</vCard:Family>
    <vCard:Other>A</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d4dca2e8-ca1d-4622-99bc-9f7a77bc633f">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#c858d22e-21e4-48ec-8ea7-a9ed07f06a4b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b2d1caed-a1d5-4ee1-8440-76e2619c8241">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#a576e71b-0d58-45c7-ad14-5dfbbc936d46"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#14fd55e8-b1f9-4516-a0e6-26281319e9b6">
    <dcterms:W3CDTF>2007-10-18T11:29:45+13:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c858d22e-21e4-48ec-8ea7-a9ed07f06a4b">
    <vCard:Given>Sumanas</vCard:Given>
    <vCard:Family>Wanant</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b720cb3e-49bd-462e-958c-50b72856a288">
    <dcterms:W3CDTF>2002-10-15T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#88236968-3b0d-4812-88aa-b97d204eace8">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f1aad3d7-0d83-41c0-9da0-194424806277">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2bad6803-eb75-4a54-ac01-d9697851d665">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#ca50882d-18a5-4067-b05b-dd0d06aee358"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bcd7ede7-c1f6-45a5-8374-fe7d1e64c099">
    <dcterms:W3CDTF>2000-08-07</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1668d973-5d1e-4c04-9f83-ea7fa1877865">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1a4b3046-a45f-4cb9-a180-1bb6644d3cda">
    <bqs:Pubmed_id>10882558</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#dc09cb7d-751c-4d00-84fb-ba8ff037b37e"/>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:title>Insulin receptor binding kinetics: modeling and simulation studies (Divalent Receptor Model)</dc:title>
    <dc:publisher>The University of Auckland, Auckland Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#9e8f505c-a156-46d9-be97-0697071dc193"/>
    <dcterms:created rdf:resource="rdf:#b720cb3e-49bd-462e-958c-50b72856a288"/>
    <dc:creator rdf:resource="rdf:#440e7ba0-61d2-493b-9622-d0e76e00a82a"/>
    <cmeta:modification rdf:resource="rdf:#0fb13dbb-6386-4f14-9758-385b8ebebb35"/>
    <cmeta:modification rdf:resource="rdf:#e72b9de6-a691-448b-b89a-3ca6dd8676ba"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4565f676-4ba9-4d94-b8c7-929bedf6ae26">
    <dcterms:W3CDTF>2003-04-09</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0fb13dbb-6386-4f14-9758-385b8ebebb35">
    <dcterms:modified rdf:resource="rdf:#14fd55e8-b1f9-4516-a0e6-26281319e9b6"/>
    <rdf:value>Fixed problem with units. Added a variable 'scatchard' in component 'insulin' which is defined by the equation: scatchard = (x3 + x4) / x1  and represents the 'bound/free' Scatchard axis.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#31147dff-21a1-4f61-86b8-51204d3c8e17"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#440e7ba0-61d2-493b-9622-d0e76e00a82a">
    <vCard:ORG rdf:resource="rdf:#a97dd2fb-4d07-4859-be50-7f2be4d93d60"/>
    <vCard:EMAIL rdf:resource="rdf:#f1aad3d7-0d83-41c0-9da0-194424806277"/>
    <vCard:N rdf:resource="rdf:#1668d973-5d1e-4c04-9f83-ea7fa1877865"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2ae7a79e-1655-476b-8fd4-113b64546677">
    <vCard:N rdf:resource="rdf:#024f77e4-f07d-4135-8e54-04354dba910b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#dc09cb7d-751c-4d00-84fb-ba8ff037b37e">
    <dc:creator rdf:resource="rdf:#39fe56e6-29bf-46cb-97a3-dbc04afda4aa"/>
    <dc:title>Insulin receptor binding kinetics: modeling and simulation studies</dc:title>
    <bqs:volume>205</bqs:volume>
    <bqs:first_page>355</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#85ff81b4-e56c-4a9e-8bda-f42c760faa41"/>
    <dcterms:issued rdf:resource="rdf:#bcd7ede7-c1f6-45a5-8374-fe7d1e64c099"/>
    <bqs:last_page>364</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="#wanant_2000">
    <ns7:simulation rdf:resource="rdf:#$oEFyV1"/>
    <dc:title>Wanant and Quon's 2000 divalent receptor model of insulin-receptor binding kinetics.</dc:title>
    <cmeta:comment rdf:resource="rdf:#76a6c025-5598-4a1b-ac9f-53dda1efbb34"/>
    <bqs:reference rdf:resource="rdf:#1a4b3046-a45f-4cb9-a180-1bb6644d3cda"/>
    <bqs:reference rdf:resource="rdf:#c5b2f9a2-135d-4923-8509-5dbdcce6540d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ca50882d-18a5-4067-b05b-dd0d06aee358">
    <vCard:Given>Michael</vCard:Given>
    <vCard:Family>Quon</vCard:Family>
    <vCard:Other>J</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9e8f505c-a156-46d9-be97-0697071dc193">
    <dc:creator rdf:resource="rdf:#94bbcc82-dc7b-4693-860b-1f8267caede0"/>
    <rdf:value>This model has been rebuilt by James Lawson without using reaction elements, and is known to run in PCEnv, but does not currently produce the correct output. This variant corresponds to the divalent model.</rdf:value>
  </rdf:Description>
</rdf:RDF>
</model>
