<?xml version="1.0"?>
<!--
This CellML file was generated on 12/04/2010 at 5:53:53 at p.m. using:

COR (0.9.31.1371)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="wolf_2000" cmeta:id="wolf_2000" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">

	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Transduction of Intracellular and Intercellular Dynamics in Yeast Glycolytic Oscillations</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This model runs to reproduce published results in COR and OpenCell. The units are consistent throughout. This model currently reproduces Figure 4. The initial conditions were estimated and the model run to steady state to yield precise values, changing any parameters will necessitate repeating this procedure. 
          </para>
			</section>
			
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: Under certain well-defined conditions, a population of yeast cells exhibits glycolytic oscillations that synchronize through intercellular acetaldehyde. This implies that the dynamic phenomenon of the oscillation propagates within and between cells. We here develop a method to establish by which route dynamics propagate through a biological reaction network. Application of the method to yeast demonstrates how the oscillations and the synchronization signal can be transduced. That transduction is not so much through the backbone of glycolysis, as via the Gibbs energy and redox coenzyme couples (ATP/ADP, and NADH/NAD), and via both intra- and intercellular acetaldehyde.
</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
Transduction of Intracellular and Intercellular Dynamics in Yeast Glycolytic Oscillations, Jana Wolf, Jutta Passarge, Oscar J.G. Somsen, Jacky L. Snoep, Reinhart Heinrich and Hans V. Westerhoff, 2000, <emphasis>Biophysical Journal</emphasis>, 78, 1145-1153. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=10692304&amp;dopt=Abstract">PubMed ID: 10692304</ulink>
				</para>
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>schematic diagram</title>
							</objectinfo>
							<imagedata fileref="wolf_passarge_2000.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic representation of the model.  The nine variable model includes all shown metabolites as variables where S1 represents glucose, S2 represents fructose-1,6-bisphosphate, S3 represents the triphopshate pool, S4 represents 3-phosphoglycerate, S5 represents pyruvate, S6 represents intracellular acetaldehyde, S6,ex represents extracellular acetaldehyde, A2 is ADP, A3 is ATP, N1 is NAD<superscript>+</superscript> and N2 is NADH.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	   <units name="minute">
      <unit multiplier="60" units="second"/>
   </units>
   <units name="millimolar">
      <unit prefix="milli" units="mole"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="flux">
      <unit units="millimolar"/>
      <unit exponent="-1" units="minute"/>
   </units>
   <units name="first_order_rate_constant">
      <unit exponent="-1" units="minute"/>
   </units>
   <units name="second_order_rate_constant">
      <unit exponent="-1" units="millimolar"/>
      <unit exponent="-1" units="minute"/>
   </units>
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="minute"/>
   </component>
   <component name="S1">
      <variable cmeta:id="S1_S1" initial_value="1.57981839" name="S1" public_interface="out" units="millimolar"/>
      <variable name="Jo" public_interface="in" units="flux"/>
      <variable name="v1" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>S1</ci>
            </apply>
            <apply>
               <minus/>
               <ci>Jo</ci>
               <ci>v1</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="S2">
      <variable cmeta:id="S2_S2" initial_value="4.8279999" name="S2" public_interface="out" units="millimolar"/>
      <variable name="v1" public_interface="in" units="flux"/>
      <variable name="v2" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>S2</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v1</ci>
               <ci>v2</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="S3">
      <variable cmeta:id="S3_S3" initial_value="0.468657507" name="S3" public_interface="out" units="millimolar"/>
      <variable name="v2" public_interface="in" units="flux"/>
      <variable name="v3" public_interface="in" units="flux"/>
      <variable name="v8" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>S3</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                  <ci>v2</ci>
               </apply>
               <apply>
                  <plus/>
                  <ci>v3</ci>
                  <ci>v8</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="S4">
      <variable cmeta:id="S4_S4" initial_value="0.589391932" name="S4" public_interface="out" units="millimolar"/>
      <variable name="v3" public_interface="in" units="flux"/>
      <variable name="v4" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>S4</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v3</ci>
               <ci>v4</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="S5">
      <variable cmeta:id="S5_S5" initial_value="8.210114438" name="S5" public_interface="out" units="millimolar"/>
      <variable name="v4" public_interface="in" units="flux"/>
      <variable name="v5" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>S5</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v4</ci>
               <ci>v5</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="S6">
      <variable cmeta:id="S6_S6" initial_value="0.078042624" name="S6" public_interface="out" units="millimolar"/>
      <variable name="v5" public_interface="in" units="flux"/>
      <variable name="v6" public_interface="in" units="flux"/>
      <variable name="J" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>S6</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v5</ci>
               <apply>
                  <plus/>
                  <ci>v6</ci>
                  <ci>J</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="S6_ex">
      <variable cmeta:id="S6_ex_S6_ex" initial_value="0.025277594" name="S6_ex" public_interface="out" units="millimolar"/>
      <variable initial_value="0.1" name="phi" units="dimensionless"/>
      <variable name="v9" public_interface="in" units="flux"/>
      <variable name="J" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>S6_ex</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>phi</ci>
                  <ci>J</ci>
               </apply>
               <ci>v9</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="A3">
      <variable cmeta:id="A3_A3" initial_value="1.972814237" name="A3" public_interface="out" units="millimolar"/>
      <variable name="v1" public_interface="in" units="flux"/>
      <variable name="v3" public_interface="in" units="flux"/>
      <variable name="v4" public_interface="in" units="flux"/>
      <variable name="v7" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>A3</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <ci>v3</ci>
                  <ci>v4</ci>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                     <ci>v1</ci>
                  </apply>
                  <ci>v7</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="A">
      <variable initial_value="4" name="A" units="millimolar"/>
      <variable cmeta:id="A_A2" name="A2" public_interface="out" units="millimolar"/>
      <variable name="A3" public_interface="in" units="millimolar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>A2</ci>
            <apply>
               <minus/>
               <ci>A</ci>
               <ci>A3</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="N2">
      <variable cmeta:id="N2_N2" initial_value="0.384873894" name="N2" public_interface="out" units="millimolar"/>
      <variable name="v3" public_interface="in" units="flux"/>
      <variable name="v6" public_interface="in" units="flux"/>
      <variable name="v8" public_interface="in" units="flux"/>
      <variable name="time" public_interface="in" units="minute"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>N2</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v3</ci>
               <apply>
                  <plus/>
                  <ci>v6</ci>
                  <ci>v8</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="N">
      <variable initial_value="1" name="N" units="millimolar"/>
      <variable cmeta:id="N_N1" name="N1" public_interface="out" units="millimolar"/>
      <variable name="N2" public_interface="in" units="millimolar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>N1</ci>
            <apply>
               <minus/>
               <ci>N</ci>
               <ci>N2</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v1">
      <variable cmeta:id="v1_v1" name="v1" public_interface="out" units="flux"/>
      <variable name="S1" public_interface="in" units="millimolar"/>
      <variable name="A3" public_interface="in" units="millimolar"/>
      <variable initial_value="1" name="K_i" units="millimolar"/>
      <variable initial_value="550" name="k_1" units="second_order_rate_constant"/>
      <variable initial_value="4" name="n" units="dimensionless"/>
      <variable name="f_A3" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>f_A3</ci>
            <apply>
               <power/>
               <apply>
                  <plus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <power/>
                     <apply>
                        <divide/>
                        <ci>A3</ci>
                        <ci>K_i</ci>
                     </apply>
                     <ci>n</ci>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v1</ci>
            <apply>
               <times/>
               <ci>k_1</ci>
               <ci>S1</ci>
               <ci>A3</ci>
               <ci>f_A3</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v2">
      <variable cmeta:id="v2_v2" name="v2" public_interface="out" units="flux"/>
      <variable name="S2" public_interface="in" units="millimolar"/>
      <variable initial_value="9.8" name="k_2" units="first_order_rate_constant"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v2</ci>
            <apply>
               <times/>
               <ci>k_2</ci>
               <ci>S2</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v3">
      <variable cmeta:id="v3_v3" name="v3" public_interface="out" units="flux"/>
      <variable name="S3" public_interface="in" units="millimolar"/>
      <variable name="S4" public_interface="in" units="millimolar"/>
      <variable name="N1" public_interface="in" units="millimolar"/>
      <variable name="N2" public_interface="in" units="millimolar"/>
      <variable name="A2" public_interface="in" units="millimolar"/>
      <variable name="A3" public_interface="in" units="millimolar"/>
      <variable initial_value="323.8" name="k_GAPDH_plus" units="second_order_rate_constant"/>
      <variable initial_value="57823.1" name="k_GAPDH_minus" units="second_order_rate_constant"/>
      <variable initial_value="76411.1" name="k_PGK_plus" units="second_order_rate_constant"/>
      <variable initial_value="23.7" name="k_PGK_minus" units="second_order_rate_constant"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v3</ci>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <times/>
                     <ci>k_GAPDH_plus</ci>
                     <ci>k_PGK_plus</ci>
                     <ci>S3</ci>
                     <ci>N1</ci>
                     <ci>A2</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k_GAPDH_minus</ci>
                     <ci>k_PGK_minus</ci>
                     <ci>S4</ci>
                     <ci>A3</ci>
                     <ci>N2</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>k_GAPDH_minus</ci>
                     <ci>N2</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k_PGK_plus</ci>
                     <ci>A2</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v4">
      <variable cmeta:id="v4_v4" name="v4" public_interface="out" units="flux"/>
      <variable name="S4" public_interface="in" units="millimolar"/>
      <variable name="A2" public_interface="in" units="millimolar"/>
      <variable initial_value="80" name="k_4" units="second_order_rate_constant"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v4</ci>
            <apply>
               <times/>
               <ci>k_4</ci>
               <ci>S4</ci>
               <ci>A2</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v5">
      <variable cmeta:id="v5_v5" name="v5" public_interface="out" units="flux"/>
      <variable name="S5" public_interface="in" units="millimolar"/>
      <variable initial_value="9.7" name="k_5" units="first_order_rate_constant"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v5</ci>
            <apply>
               <times/>
               <ci>k_5</ci>
               <ci>S5</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v6">
      <variable cmeta:id="v6_v6" name="v6" public_interface="out" units="flux"/>
      <variable name="S6" public_interface="in" units="millimolar"/>
      <variable name="N2" public_interface="in" units="millimolar"/>
      <variable initial_value="2000" name="k_6" units="second_order_rate_constant"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v6</ci>
            <apply>
               <times/>
               <ci>k_6</ci>
               <ci>S6</ci>
               <ci>N2</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v7">
      <variable cmeta:id="v7_v7" name="v7" public_interface="out" units="flux"/>
      <variable name="A3" public_interface="in" units="millimolar"/>
      <variable initial_value="28" name="k_7" units="first_order_rate_constant"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v7</ci>
            <apply>
               <times/>
               <ci>k_7</ci>
               <ci>A3</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v8">
      <variable cmeta:id="v8_v8" name="v8" public_interface="out" units="flux"/>
      <variable name="S3" public_interface="in" units="millimolar"/>
      <variable name="N2" public_interface="in" units="millimolar"/>
      <variable initial_value="85.7" name="k_8" units="second_order_rate_constant"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v8</ci>
            <apply>
               <times/>
               <ci>k_8</ci>
               <ci>S3</ci>
               <ci>N2</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="v9">
      <variable cmeta:id="v9_v9" name="v9" public_interface="out" units="flux"/>
      <variable name="S6_ex" public_interface="in" units="millimolar"/>
      <variable initial_value="80" name="k_9" units="first_order_rate_constant"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v9</ci>
            <apply>
               <times/>
               <ci>k_9</ci>
               <ci>S6_ex</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="glucose_influx_rate">
      <variable cmeta:id="glucose_influx_rate_Jo" initial_value="50" name="Jo" public_interface="out" units="flux"/>
   </component>
   <component name="S6_flux_rate_across_the_plasma_membrane">
      <variable cmeta:id="S6_flux_rate_across_the_plasma_membrane_J" name="J" public_interface="out" units="flux"/>
      <variable initial_value="375" name="k" units="first_order_rate_constant"/>
      <variable name="S6_ex" public_interface="in" units="millimolar"/>
      <variable name="S6" public_interface="in" units="millimolar"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>J</ci>
            <apply>
               <times/>
               <ci>k</ci>
               <apply>
                  <minus/>
                  <ci>S6</ci>
                  <ci>S6_ex</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="S1" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="S2" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="S3" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="S4" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="S5" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="S6" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="S6_ex" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="A3" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="N2" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="S1" component_2="glucose_influx_rate"/>
      <map_variables variable_1="Jo" variable_2="Jo"/>
   </connection>
   <connection>
      <map_components component_1="S1" component_2="v1"/>
      <map_variables variable_1="S1" variable_2="S1"/>
      <map_variables variable_1="v1" variable_2="v1"/>
   </connection>
   <connection>
      <map_components component_1="S2" component_2="v1"/>
      <map_variables variable_1="v1" variable_2="v1"/>
   </connection>
   <connection>
      <map_components component_1="S2" component_2="v2"/>
      <map_variables variable_1="S2" variable_2="S2"/>
      <map_variables variable_1="v2" variable_2="v2"/>
   </connection>
   <connection>
      <map_components component_1="S3" component_2="v2"/>
      <map_variables variable_1="v2" variable_2="v2"/>
   </connection>
   <connection>
      <map_components component_1="S3" component_2="v3"/>
      <map_variables variable_1="S3" variable_2="S3"/>
      <map_variables variable_1="v3" variable_2="v3"/>
   </connection>
   <connection>
      <map_components component_1="S3" component_2="v8"/>
      <map_variables variable_1="S3" variable_2="S3"/>
      <map_variables variable_1="v8" variable_2="v8"/>
   </connection>
   <connection>
      <map_components component_1="S4" component_2="v3"/>
      <map_variables variable_1="S4" variable_2="S4"/>
      <map_variables variable_1="v3" variable_2="v3"/>
   </connection>
   <connection>
      <map_components component_1="S4" component_2="v4"/>
      <map_variables variable_1="S4" variable_2="S4"/>
      <map_variables variable_1="v4" variable_2="v4"/>
   </connection>
   <connection>
      <map_components component_1="S5" component_2="v4"/>
      <map_variables variable_1="v4" variable_2="v4"/>
   </connection>
   <connection>
      <map_components component_1="S5" component_2="v5"/>
      <map_variables variable_1="S5" variable_2="S5"/>
      <map_variables variable_1="v5" variable_2="v5"/>
   </connection>
   <connection>
      <map_components component_1="S6" component_2="v5"/>
      <map_variables variable_1="v5" variable_2="v5"/>
   </connection>
   <connection>
      <map_components component_1="S6" component_2="v6"/>
      <map_variables variable_1="S6" variable_2="S6"/>
      <map_variables variable_1="v6" variable_2="v6"/>
   </connection>
   <connection>
      <map_components component_1="S6" component_2="S6_flux_rate_across_the_plasma_membrane"/>
      <map_variables variable_1="J" variable_2="J"/>
      <map_variables variable_1="S6" variable_2="S6"/>
   </connection>
   <connection>
      <map_components component_1="S6_ex" component_2="S6_flux_rate_across_the_plasma_membrane"/>
      <map_variables variable_1="J" variable_2="J"/>
      <map_variables variable_1="S6_ex" variable_2="S6_ex"/>
   </connection>
   <connection>
      <map_components component_1="S6_ex" component_2="v9"/>
      <map_variables variable_1="S6_ex" variable_2="S6_ex"/>
      <map_variables variable_1="v9" variable_2="v9"/>
   </connection>
   <connection>
      <map_components component_1="A" component_2="v3"/>
      <map_variables variable_1="A2" variable_2="A2"/>
   </connection>
   <connection>
      <map_components component_1="A" component_2="v4"/>
      <map_variables variable_1="A2" variable_2="A2"/>
   </connection>
   <connection>
      <map_components component_1="A" component_2="A3"/>
      <map_variables variable_1="A3" variable_2="A3"/>
   </connection>
   <connection>
      <map_components component_1="A3" component_2="v1"/>
      <map_variables variable_1="A3" variable_2="A3"/>
      <map_variables variable_1="v1" variable_2="v1"/>
   </connection>
   <connection>
      <map_components component_1="A3" component_2="v3"/>
      <map_variables variable_1="A3" variable_2="A3"/>
      <map_variables variable_1="v3" variable_2="v3"/>
   </connection>
   <connection>
      <map_components component_1="A3" component_2="v4"/>
      <map_variables variable_1="v4" variable_2="v4"/>
   </connection>
   <connection>
      <map_components component_1="A3" component_2="v7"/>
      <map_variables variable_1="A3" variable_2="A3"/>
      <map_variables variable_1="v7" variable_2="v7"/>
   </connection>
   <connection>
      <map_components component_1="N" component_2="v3"/>
      <map_variables variable_1="N1" variable_2="N1"/>
   </connection>
   <connection>
      <map_components component_1="N2" component_2="v3"/>
      <map_variables variable_1="N2" variable_2="N2"/>
      <map_variables variable_1="v3" variable_2="v3"/>
   </connection>
   <connection>
      <map_components component_1="N2" component_2="v6"/>
      <map_variables variable_1="N2" variable_2="N2"/>
      <map_variables variable_1="v6" variable_2="v6"/>
   </connection>
   <connection>
      <map_components component_1="N2" component_2="v8"/>
      <map_variables variable_1="N2" variable_2="N2"/>
      <map_variables variable_1="v8" variable_2="v8"/>
   </connection>
   <connection>
      <map_components component_1="N" component_2="N2"/>
      <map_variables variable_1="N2" variable_2="N2"/>
   </connection>
<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
<rdf:Description rdf:about="rdf:#47b0cbf0-4146-4065-be03-a206009cded5">
<ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#0bd49791-b7a6-4526-a838-fff02cb2427a"/>
</ORG>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#dda4b59e-dd1b-4585-b489-b32a7d7a3005"/>
</N>
<EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#1c1c6156-f769-4152-a41b-217d7296ae5b"/>
</EMAIL>
</rdf:Description>
<rdf:Description rdf:about="rdf:#7debef1c-d06c-431e-b02e-db9b9bf355c7">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#3b44c465-fe4b-4f0d-849a-e53fcc3896d2"/>
</N>
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#c0fa8a40-7453-4ab1-acb8-753b9da46ddb">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Heinrich</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Reinhart</Given>
</rdf:Description>
<rdf:Description rdf:about="#A">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">A</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">total adenosine phosphates</alternative>
</rdf:Description>
<rdf:Description rdf:about="rdf:#6e51dfd1-e17b-4e6a-8a9a-83128d042871">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2000-03</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="#S6_ex">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">S6_ex</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">extracellular acetaldehyde</alternative>
</rdf:Description>
<rdf:Description rdf:about="rdf:#feb76f05-aa81-4d18-9202-2fa039c1ccb0">
<FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine Lloyd</FN>
</rdf:Description>
<rdf:Description rdf:nodeID="n1">
<rdf:_4 xml:lang="en">oscillator</rdf:_4>
<rdf:_5 xml:lang="en">intercellular dynamics</rdf:_5>
<rdf:_6 xml:lang="en">metabolism</rdf:_6>
<rdf:_1 xml:lang="en">glycolysis</rdf:_1>
<rdf:_2 xml:lang="en">intracellular dynamics</rdf:_2>
<rdf:_3 xml:lang="en">signal transduction</rdf:_3>
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#1b0b65d7-419e-4634-96fb-cb10ccee45f3">
<JournalArticle xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#e9118caa-f4d5-46fe-b295-d437d86812ed"/>
</JournalArticle>
<Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">10692304</Pubmed_id>
</rdf:Description>
<rdf:Description rdf:about="rdf:#a63e559f-3421-4673-aacd-b5a51d796d99">
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">V</Other>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Westerhoff</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Hans</Given>
</rdf:Description>
<rdf:Description rdf:about="rdf:#e9118caa-f4d5-46fe-b295-d437d86812ed">
<last_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">1153</last_page>
<Journal xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#9742af4f-3b54-415c-86dc-0499f7b0837f"/>
</Journal>
<issued xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#6e51dfd1-e17b-4e6a-8a9a-83128d042871"/>
</issued>
<volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">78</volume>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Transduction of Intracellular and Intercellular Dynamics in Yeast Glycolytic Oscillations</title>
<first_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">1145</first_page>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#ee6a7c6e-f695-4162-bbf4-a62d663d46bc"/>
</creator>
</rdf:Description>
<rdf:Description rdf:about="rdf:#1c1c6156-f769-4152-a41b-217d7296ae5b">
<rdf:value xml:lang="en">c.lloyd@auckland.ac.nz</rdf:value>
<rdf:type>
<rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#1fee9f80-81f0-4f3a-a121-8b278695ee65">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#c0fa8a40-7453-4ab1-acb8-753b9da46ddb"/>
</N>
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#96fe14a1-68e3-4e4b-bb3d-61f9b9f1127b">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Passarge</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Jutta</Given>
</rdf:Description>
<rdf:Description rdf:nodeID="n2">
<pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">10000</pointDensity>
<maximumStepSize xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">0.1</maximumStepSize>
<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">5</endingValue>
</rdf:Description>
<rdf:Description rdf:about="#S5">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">S5</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">pyruvate</alternative>
</rdf:Description>
<rdf:Description rdf:about="rdf:#2c83b267-2c75-4934-ba57-55f174d0fa01">
<rdf:value xml:lang="en">This is the CellML description of Wolf et al's mathematical model of 
          intracellular and intercellular dynamics in yeast glycolytic 
          oscillations.</rdf:value><creator xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:about="rdf:#feb76f05-aa81-4d18-9202-2fa039c1ccb0"/></creator></rdf:Description><rdf:Description rdf:about="rdf:#3f32e5cf-d281-40c0-825f-ff6bd3dd67a4"><W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2007-06-01T00:00:00+00:00</W3CDTF></rdf:Description><rdf:Description rdf:about="#N2"><title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">N2</title><alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">NADH</alternative></rdf:Description><rdf:Description rdf:about="rdf:#81c29fab-2c60-4568-b0b6-3c37cf164e57"><creator xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:about="rdf:#0fa87922-a7aa-46ed-bae4-82a1939a22b3"/></creator></rdf:Description><rdf:Description rdf:nodeID="n3"><rdf:first><rdf:Description rdf:nodeID="n2"/></rdf:first><rdf:rest><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/></rdf:rest></rdf:Description><rdf:Description rdf:about="rdf:#770575a7-5bb1-472b-bced-e6ceabd044f8"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:about="rdf:#96fe14a1-68e3-4e4b-bb3d-61f9b9f1127b"/></N><rdf:type><rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/></rdf:type></rdf:Description><rdf:Description rdf:about="#S1"><title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">S1</title><alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">glucose</alternative></rdf:Description><rdf:Description rdf:about="#S2"><title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">S2</title><alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">fructose-1,6-bisphosphate</alternative></rdf:Description><rdf:Description rdf:about="rdf:#b371f2f1-0f4b-48c5-9995-c2e037a5ce15"><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Wolf</Family><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Jana</Given></rdf:Description><rdf:Description rdf:about="rdf:#32d85663-0c93-4c3d-beef-74a58da14136"><rdf:value xml:lang="en">The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics. This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology. 

The model runs in the PCEnv simulator but gives a flat output.</rdf:value>
<modified xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#4dffd427-3c1f-4ec1-8bc8-9935d7b9a4a4"/>
</modified>
<cmeta:modifier>
<rdf:Description rdf:about="rdf:#a7089319-b290-405e-83cb-35cd91226b16"/>
</cmeta:modifier>
</rdf:Description>
<rdf:Description rdf:about="#S4">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">S4</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">3-phosphoglycerate</alternative>
</rdf:Description>
<rdf:Description rdf:about="#S3">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">S3</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">triose phosphate pool</alternative>
</rdf:Description>
<rdf:Description rdf:about="#wolf_2000">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">A dynamic model of glycolytic oscillations in yeast</title>
<simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n4"/>
</simulation>
<cmeta:bio_entity xml:lang="en">yeast</cmeta:bio_entity>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#30559651-ad43-46c4-ad14-731aaab0d55a"/>
</reference>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#1b0b65d7-419e-4634-96fb-cb10ccee45f3"/>
</reference>
<cmeta:comment>
<rdf:Description rdf:about="rdf:#2c83b267-2c75-4934-ba57-55f174d0fa01"/>
</cmeta:comment>
</rdf:Description>
<rdf:Description rdf:nodeID="n4">
<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n3"/>
</boundIntervals>
</rdf:Description>
<rdf:Description rdf:about="#S6">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">S6</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">intracellular acetaldehyde</alternative>
</rdf:Description>
<rdf:Description rdf:about="rdf:#3b44c465-fe4b-4f0d-849a-e53fcc3896d2">
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">L</Other>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Snoep</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Jacky</Given>
</rdf:Description>
<rdf:Description rdf:about="rdf:#30559651-ad43-46c4-ad14-731aaab0d55a">
<subject xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#8bc8bd1c-1e79-4f73-992a-2cc36d66ad8b"/>
</subject>
</rdf:Description>
<rdf:Description rdf:about="rdf:#9742af4f-3b54-415c-86dc-0499f7b0837f">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Biophysical Journal</title>
</rdf:Description>
<rdf:Description rdf:about="rdf:#1737f6a9-e19d-49f9-bff8-33884351bc3f">
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">May</Other>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lloyd</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine</Given>
</rdf:Description>
<rdf:Description rdf:about="rdf:#4dffd427-3c1f-4ec1-8bc8-9935d7b9a4a4">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2007-06-05T10:49:58+12:00</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#ee6a7c6e-f695-4162-bbf4-a62d663d46bc">
<rdf:_4>
<rdf:Description rdf:about="rdf:#7debef1c-d06c-431e-b02e-db9b9bf355c7"/>
</rdf:_4>
<rdf:_5>
<rdf:Description rdf:about="rdf:#1fee9f80-81f0-4f3a-a121-8b278695ee65"/>
</rdf:_5>
<rdf:_6>
<rdf:Description rdf:about="rdf:#8b013af0-7ca1-4f7b-bb84-87589aa13eae"/>
</rdf:_6>
<rdf:_1>
<rdf:Description rdf:about="rdf:#8aef3580-983a-4331-ad0c-ed490dfd463f"/>
</rdf:_1>
<rdf:_2>
<rdf:Description rdf:about="rdf:#770575a7-5bb1-472b-bced-e6ceabd044f8"/>
</rdf:_2>
<rdf:_3>
<rdf:Description rdf:about="rdf:#ffe166ed-bc14-47ca-a07b-19a474236ba1"/>
</rdf:_3>
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#ffe166ed-bc14-47ca-a07b-19a474236ba1">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#cdb922b4-eea0-461c-8764-b156f831b308"/>
</N>
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#a7089319-b290-405e-83cb-35cd91226b16">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#1737f6a9-e19d-49f9-bff8-33884351bc3f"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="#A3">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">A3</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">ATP</alternative>
</rdf:Description>
<rdf:Description rdf:about="rdf:#dda4b59e-dd1b-4585-b489-b32a7d7a3005">
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">May</Other>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lloyd</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine</Given>
</rdf:Description>
<rdf:Description rdf:about="rdf:#8bc8bd1c-1e79-4f73-992a-2cc36d66ad8b">
<rdf:value>
<rdf:Description rdf:nodeID="n1"/>
</rdf:value>
<subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#8b013af0-7ca1-4f7b-bb84-87589aa13eae">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#a63e559f-3421-4673-aacd-b5a51d796d99"/>
</N>
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#cdb922b4-eea0-461c-8764-b156f831b308">
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">G</Other>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">J</Other>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Somsen</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Oscar</Given>
</rdf:Description>
<rdf:Description rdf:about="">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#47b0cbf0-4146-4065-be03-a206009cded5"/>
</creator>
<cmeta:comment>
<rdf:Description rdf:about="rdf:#81c29fab-2c60-4568-b0b6-3c37cf164e57"/>
</cmeta:comment>
<cmeta:modification>
<rdf:Description rdf:about="rdf:#32d85663-0c93-4c3d-beef-74a58da14136"/>
</cmeta:modification>
<publisher xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">The University of Auckland, Auckland Bioengineering Institute</publisher>
<created xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#3f32e5cf-d281-40c0-825f-ff6bd3dd67a4"/>
</created>
</rdf:Description>
<rdf:Description rdf:about="rdf:#0bd49791-b7a6-4526-a838-fff02cb2427a">
<Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Auckland Bioengineering Institute</Orgunit>
<Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The University of Auckland</Orgname>
</rdf:Description>
<rdf:Description rdf:about="rdf:#8aef3580-983a-4331-ad0c-ed490dfd463f">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#b371f2f1-0f4b-48c5-9995-c2e037a5ce15"/>
</N>
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
</rdf:Description>
</rdf:RDF>
</model>